#pragma once
#include "HSLMthLib.hsl"
#include "HSLTrcLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace ALIQUOT_WITH_EASYSTEPS {
  function CalcAliquote( sequence DispenseSequence, variable VolumePerWell, variable VolumePreAliquote, variable VolumePostAliquote, variable MaxVolumeTip, variable & VolumeToAspirate, variable & NumberOfDispense, variable FullTrace, variable NumberOfChannels ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function CalcAliquote( sequence DispenseSequence, variable VolumePerWell, variable VolumePreAliquote, variable VolumePostAliquote, variable MaxVolumeTip, variable & VolumeToAspirate, variable & NumberOfDispense, variable FullTrace, variable NumberOfChannels ) void {
    private variable SEQ_CurrentPosition;
    private variable NumberOfPossibleAliquotes;
    private variable NumberOfRemainingColumns;
    private variable RemainingWells;
    private variable SEQ_EndPosition;
    private variable RestVolumeTipForAliquote;
    private variable VolumePrePostAliquote;
    VolumeToAspirate = 0;
    NumberOfDispense = 0;
    NumberOfRemainingColumns = 0.0;
    VolumePrePostAliquote = 0.0;
    RestVolumeTipForAliquote = 0.0;
    NumberOfPossibleAliquotes = 0.0;
    VolumePerWell = VolumePerWell + 0.0;
    VolumePreAliquote = VolumePreAliquote + 0.0;
    VolumePostAliquote = VolumePostAliquote + 0.0;
    MaxVolumeTip = MaxVolumeTip + 0.0;
    VolumePrePostAliquote = VolumePreAliquote + VolumePostAliquote;
    RestVolumeTipForAliquote = MaxVolumeTip - VolumePrePostAliquote;
    SEQ_CurrentPosition = DispenseSequence.GetCurrentPosition();
    SEQ_EndPosition = DispenseSequence.GetCount();
    RemainingWells = SEQ_EndPosition - SEQ_CurrentPosition;
    RemainingWells = RemainingWells + 1;
    RemainingWells = RemainingWells * 1.0;
    NumberOfChannels = NumberOfChannels * 1.0;
    NumberOfRemainingColumns = RemainingWells / NumberOfChannels;
    TrcTrace(Translate("number of channels: "), NumberOfChannels);
    TrcTrace(Translate("RemainingWells: "), RemainingWells);
    TrcTrace(Translate("numberOfRemaning columns: "), NumberOfRemainingColumns);
    NumberOfRemainingColumns = MthFCeiling(NumberOfRemainingColumns);
    if (FullTrace == 1)
    {
      TrcTrace(Translate("...................................................................."), Translate("Trace from Aliquot_with_EasySteps function CalcAliquote2"));
      TrcTrace12(Translate("SEQ_CurrentPosition = "), SEQ_CurrentPosition, Translate("  SEQ_EndPosition = "), SEQ_EndPosition, Translate("  RemainingWells = "), RemainingWells, Translate("  NumberOfRemainingColumns = "), NumberOfRemainingColumns, Translate(""), Translate(""), Translate(""), Translate(""));
    }
    NumberOfPossibleAliquotes = RestVolumeTipForAliquote / VolumePerWell;
    NumberOfPossibleAliquotes = MthFFloor(NumberOfPossibleAliquotes);
    if (FullTrace == 1)
    {
      TrcTrace(Translate("NumberOfPossibleAliquotes = "), NumberOfPossibleAliquotes);
    }
    if (NumberOfRemainingColumns >= NumberOfPossibleAliquotes)
    {
      NumberOfDispense = NumberOfPossibleAliquotes;
      VolumeToAspirate = NumberOfPossibleAliquotes * VolumePerWell;
      VolumeToAspirate = VolumeToAspirate + VolumePrePostAliquote;
      if (FullTrace == 1)
      {
        TrcTrace12(Translate("NumberOfDispense = "), NumberOfDispense, Translate("  VolumeToAspirate = "), VolumeToAspirate, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      }
    }
    if (NumberOfRemainingColumns < NumberOfPossibleAliquotes)
    {
      NumberOfDispense = NumberOfRemainingColumns;
      VolumeToAspirate = NumberOfRemainingColumns * VolumePerWell;
      VolumeToAspirate = VolumeToAspirate + VolumePrePostAliquote;
      if (FullTrace == 1)
      {
        TrcTrace12(Translate("NumberOfDispense = "), NumberOfDispense, Translate("  VolumeToAspirate = "), VolumeToAspirate, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
      }
    }
  }
} // library namespace
