#pragma once
#include "HSLML_STARLib.hsl"
#include "HSL_WasteChute.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace COMMON96HEADSUBMETHODS {
  function Clear96HeadAndArm( device & ML_STAR, sequence move_seq ) void ;
  function Eject96HeadTips( device & ML_STAR, sequence move_seq ) void ;
  function Eject96HeadTipsAndShake( device & ML_STAR, variable shake_time, sequence move_seq ) void ;
  function Move96HeadToFront( device & ML_STAR, sequence move_seq ) void ;
  function Move96HeadUp( device & ML_STAR, sequence move_seq ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function Clear96HeadAndArm( device & ML_STAR, sequence move_seq ) void {
    Move96HeadToFront(ML_STAR, move_seq);
    MECC::TraceComment(Translate("----------Move arm to the right----------"));
    ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
  }

  function Move96HeadToFront( device & ML_STAR, sequence move_seq ) void {
    if(0){
      Move96HeadUp(ML_STAR, move_seq);
    }
    MECC::TraceComment(Translate("----------Move 96 head to front----------"));
    ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
    if(0){
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
  }

  function Eject96HeadTips( device & ML_STAR, sequence move_seq ) void {
    private variable _blnSimulationMode;
    private timer timer1;
    Eject96HeadTipsAndShake(ML_STAR, 5, move_seq);
  }

  function Move96HeadUp( device & ML_STAR, sequence move_seq ) void {
    MECC::TraceComment(Translate("----------Move 96 head up----------"));
    if(0){
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
    ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
  }

  function Eject96HeadTipsAndShake( device & ML_STAR, variable shake_time, sequence move_seq ) void {
    private variable _blnSimulationMode;
    private timer timer1;
    MECC::TraceComment(Translate("----------Move 96 head up and to the front----------"));
    Move96HeadToFront(ML_STAR, move_seq);
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    _blnSimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    if (_blnSimulationMode == 1)
    {
    }
    else
    {
      WasteChute::WasteChuteShakeStart(ML_STAR, 1, 40, 1);
      if( 0 == timer1.SetTimer(shake_time) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == timer1.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      WasteChute::WasteChuteShakeStop(ML_STAR, 1);
    }
  }
} // library namespace
