#pragma once
#include "HSLTipCountingLib.hsl"
#include "HSLTrcLib.hsl"
#include "HSLSeqLib.hsl"
#include "HSLStrLib.hsl"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLFileDirectoryLib.hsl"
#include "HSLMthLib.hsl"
#include "load_instructions.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace TIPHANDLING {
  variable _str300ulTipCounter;
  variable _str1000ulTipCounter;
  variable _str50ulTipCounter;
  variable _intMaxNumberOfTipRacks;
  variable _strTipCounter;
  variable _fltTipRackGripHeight;
  variable _fltTipRackGripWidthOpen;
  variable _fltTipRackGripWidth;
  function CheckAvailableTipsFromDeck( device & ML_STAR, sequence & i_seqTipSequence, variable i_intNumberTipsRequired, variable i_intTipSize ) variable ;
  function GetAvailableTips( device & ML_STAR, sequence & i_seqlTipSequence, variable i_intTipSize, variable & o_intTipsAvailable ) variable ;
  function MoveTipRackWithCOREGrip_96HeadTipsOnly( device & ML_STAR, sequence & io_seqCOREGrip, sequence & i_seqTipRackPickup, sequence & i_seqTipRackPutdown, variable i_blEjectCOREGrips ) variable ;
  function MoveTipRackWithCOREGrip_ChannelTipsOnly( device & ML_STAR, sequence & io_seqCOREGrip, sequence & io_seqTipSeqPickup, sequence & io_seqTipSeqPutdown, variable i_blEjectCOREGrips, variable i_intTipSize, variable i_blnUpdateTipCounter ) variable ;
  function MoveTipRackWithCOREGrip_EmptyRackToWaste( device & ML_STAR, sequence & io_seqCOREGrip, sequence & i_seqTipRackPickup, sequence & i_seqTipRackPutdown, variable i_blEjectCOREGrips ) variable ;
  function Reset1000ulTipRackAfterOverlordReplacement( device & ML_STAR, sequence & io_seqTipSeq ) variable ;
  private function _Definitions(  ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    LOAD_INSTRUCTIONS::_InitLibrary();
  }
  function _ExitLibrary() {
    LOAD_INSTRUCTIONS::_ExitLibrary();
  }

  function GetAvailableTips( device & ML_STAR, sequence & i_seqlTipSequence, variable i_intTipSize, variable & o_intTipsAvailable ) variable {
    private variable blnSuccess;
    private variable blnReturnValue;
    private variable intTipSeqCurrentPosition;
    private variable intTipSeqEndPosition;
    o_intTipsAvailable = 0;
    MECC::TraceComment(Translate("----------TIP HANDLING SMT : GET AVAILABLE TIPS : START ----------"));
    blnReturnValue = 1;
    _Definitions();
    if (i_intTipSize == 1000)
    {
      _strTipCounter = _str1000ulTipCounter;
    }
    else
    {
      if (i_intTipSize == 300)
      {
        _strTipCounter = _str300ulTipCounter;
      }
      else
      {
        if (i_intTipSize == 50)
        {
          _strTipCounter = _str50ulTipCounter;
        }
        else
        {
          blnReturnValue = 0;
          TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("An invalid tip size was entered (correct entries are 1000, 300 or 50) "), Translate(""));
          MECC::TraceComment(Translate("----------TIP HANDLING SMT : GET AVAILABLE TIPS : END ----------"));
          return (blnReturnValue);
        }
      }
    }
    blnSuccess = TipCount::Read2(i_seqlTipSequence, _strTipCounter, ML_STAR);
    if (blnSuccess != 1)
    {
      blnReturnValue = 0;
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Problem reading tip counter "), Translate(""));
      MECC::TraceComment(Translate("----------TIP HANDLING SMT : GET AVAILABLE TIPS : END ----------"));
      return (blnReturnValue);
    }
    intTipSeqCurrentPosition = i_seqlTipSequence.GetCurrentPosition();
    TrcTrace(Translate("-----intTipSeqCurrentPosition = "), intTipSeqCurrentPosition);
    if (intTipSeqCurrentPosition == 0)
    {
      o_intTipsAvailable = 0;
    }
    else
    {
      intTipSeqEndPosition = i_seqlTipSequence.GetCount();
      TrcTrace(Translate("-----intTipSeqEndPosition = "), intTipSeqEndPosition);
      o_intTipsAvailable = intTipSeqEndPosition - intTipSeqCurrentPosition;
      o_intTipsAvailable = o_intTipsAvailable + 1;
    }
    TrcTrace(Translate("-----o_intTipsAvailable = "), o_intTipsAvailable);
    MECC::TraceComment(Translate("----------TIP HANDLING SMT : GET AVAILABLE TIPS : END ----------"));
    return (blnReturnValue);
  }

  private function _Definitions(  ) void {
    MECC::TraceComment(Translate("----------TIP HANDLING SMT : DEFINITIONS : START----------"));
    _fltTipRackGripWidth = 77.0;
    _fltTipRackGripWidthOpen = 86.0;
    if(0){
      _fltTipRackGripHeight = 10.0;
    }
    _fltTipRackGripHeight = 13.5;
    _str1000ulTipCounter = Translate("1000ulHighVolumeTipWithFilter");
    _str300ulTipCounter = Translate("300ulStandardVolumeTipWithFilter");
    _str50ulTipCounter = Translate("50ulTipWithFilter");
    TRACELEVEL::Trace_06(TRACE_LEVEL_DEBUG, Translate("_str1000ulTipCounter = "), _str1000ulTipCounter, Translate(", _str300ulTipCounter = "), _str300ulTipCounter, Translate(",_str50ulTipCounter = "), _str50ulTipCounter);
    _intMaxNumberOfTipRacks = 1;
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-----_intMaxNumberOfTipRacks ="), _intMaxNumberOfTipRacks);
    MECC::TraceComment(Translate("----------TIP HANDLING SMT : DEFINITIONS : END ----------"));
  }

  function CheckAvailableTipsFromDeck( device & ML_STAR, sequence & i_seqTipSequence, variable i_intNumberTipsRequired, variable i_intTipSize ) variable {
    private variable intTipsAvailable;
    private variable intReturnValue;
    MECC::TraceComment(Translate("----------TIP HANDLING SMT : CHECK AVAILABLE TIPS : START  ----------"));
    intReturnValue = 0;
    _Definitions();
    GetAvailableTips(ML_STAR, i_seqTipSequence, i_intTipSize, intTipsAvailable);
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-----intTipsAvailable = "), intTipsAvailable);
    if (intTipsAvailable == 0)
    {
      intReturnValue = 2;
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Tips required > tips available"), Translate(""));
      MECC::TraceComment(Translate("----------TIP HANDLING SMT : CHECK AVAILABLE TIPS : END  ----------"));
      return (intReturnValue);
    }
    if (i_intNumberTipsRequired > intTipsAvailable)
    {
      intReturnValue = 1;
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Tips required > tips available"), Translate(""));
      MECC::TraceComment(Translate("----------TIP HANDLING SMT : CHECK AVAILABLE TIPS : END  ----------"));
      return (intReturnValue);
    }
    MECC::TraceComment(Translate("----------TIP HANDLING SMT : CHECK AVAILABLE TIPS : END  ----------"));
    return (intReturnValue);
  }

  function MoveTipRackWithCOREGrip_ChannelTipsOnly( device & ML_STAR, sequence & io_seqCOREGrip, sequence & io_seqTipSeqPickup, sequence & io_seqTipSeqPutdown, variable i_blEjectCOREGrips, variable i_intTipSize, variable i_blnUpdateTipCounter ) variable {
    private variable blnReturnValue;
    private variable loopCounter1;
    private variable strLoopCounter;
    private variable strLabwareIDPutdown;
    private variable strLabwareIDPickup;
    MECC::TraceComment(Translate("----------TIP HANDLING SMT : MOVE TIP RACK WITH CORE GRIPS : START  ----------"));
    blnReturnValue = 1;
    _Definitions();
    if (i_intTipSize == 300)
    {
      _strTipCounter = _str300ulTipCounter;
    }
    else
    {
      if (i_intTipSize == 50)
      {
        _strTipCounter = _str50ulTipCounter;
      }
      else
      {
        blnReturnValue = 0;
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("An invalid tip size was entered (correct entries are 300 or 50) "), Translate(""));
        MECC::TraceComment(Translate("----------TIP HANDLING SMT : GET AVAILABLE TIPS : END ----------"));
        return (blnReturnValue);
      }
    }
    strLabwareIDPickup = SeqGetLabwareId(io_seqTipSeqPickup);
    if (strLabwareIDPickup == "")
    {
      strLabwareIDPickup = SeqGetName(io_seqTipSeqPickup);
    }
    SeqRemoveAll(io_seqTipSeqPickup);
    strLabwareIDPutdown = SeqGetLabwareId(io_seqTipSeqPutdown);
    if (strLabwareIDPutdown == "")
    {
      strLabwareIDPutdown = SeqGetName(io_seqTipSeqPutdown);
    }
    SeqRemoveAll(io_seqTipSeqPutdown);
    {
      for(loopCounter1 = 0; loopCounter1 < 96;)
      {
        loopCounter1 = loopCounter1 + 1;
        strLoopCounter = StrIStr(loopCounter1);
        SeqAdd(io_seqTipSeqPickup, strLabwareIDPickup, strLoopCounter);
        SeqAdd(io_seqTipSeqPutdown, strLabwareIDPutdown, strLoopCounter);
      }
    }
    SeqResetSequenceIndexes(io_seqTipSeqPickup);
    SeqResetSequenceIndexes(io_seqTipSeqPutdown);
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    if (i_blnUpdateTipCounter == 1)
    {
      TipCount::Write2(io_seqTipSeqPutdown, _strTipCounter, ML_STAR);
    }
    MECC::TraceComment(Translate("----------TIP HANDLING SMT : MOVE TIP RACK WITH CORE GRIPS : END  ----------"));
    return (blnReturnValue);
  }

  function MoveTipRackWithCOREGrip_96HeadTipsOnly( device & ML_STAR, sequence & io_seqCOREGrip, sequence & i_seqTipRackPickup, sequence & i_seqTipRackPutdown, variable i_blEjectCOREGrips ) variable {
    private variable blnReturnValue;
    MECC::TraceComment(Translate("----------TIP HANDLING SMT : MOVE TIP RACK WITH CORE GRIPS : START  ----------"));
    blnReturnValue = 1;
    _Definitions();
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    MECC::TraceComment(Translate("----------TIP HANDLING SMT : MOVE TIP RACK WITH CORE GRIPS : END  ----------"));
    return (blnReturnValue);
  }

  function MoveTipRackWithCOREGrip_EmptyRackToWaste( device & ML_STAR, sequence & io_seqCOREGrip, sequence & i_seqTipRackPickup, sequence & i_seqTipRackPutdown, variable i_blEjectCOREGrips ) variable {
    private variable blnReturnValue;
    private variable strLabwareIDPickup;
    MECC::TraceComment(Translate("----------TIP HANDLING SMT : MOVE TIP RACK WITH CORE GRIPS : START  ----------"));
    blnReturnValue = 1;
    _Definitions();
    strLabwareIDPickup = SeqGetLabwareId(i_seqTipRackPickup);
    if (strLabwareIDPickup == "")
    {
      strLabwareIDPickup = SeqGetName(i_seqTipRackPickup);
    }
    SeqAdd(i_seqTipRackPickup, strLabwareIDPickup, Translate("1"));
    SeqResetSequenceIndexes(i_seqTipRackPickup);
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    SeqRemoveAll(i_seqTipRackPickup);
    MECC::TraceComment(Translate("----------TIP HANDLING SMT : MOVE TIP RACK WITH CORE GRIPS : END  ----------"));
    return (blnReturnValue);
  }

  function Reset1000ulTipRackAfterOverlordReplacement( device & ML_STAR, sequence & io_seqTipSeq ) variable {
    private variable loopCounter1;
    private variable strLoopCounter;
    private variable blnReturnValue;
    private variable strLabwareID;
    MECC::TraceComment(Translate("----------TIP HANDLING SMT : RESET 1000 ul TIP SEQ : START  ----------"));
    blnReturnValue = 1;
    _Definitions();
    strLabwareID = SeqGetLabwareId(io_seqTipSeq);
    if (strLabwareID == "")
    {
      strLabwareID = SeqGetName(io_seqTipSeq);
    }
    SeqRemoveAll(io_seqTipSeq);
    {
      for(loopCounter1 = 0; loopCounter1 < 96;)
      {
        loopCounter1 = loopCounter1 + 1;
        strLoopCounter = StrIStr(loopCounter1);
        SeqAdd(io_seqTipSeq, strLabwareID, strLoopCounter);
      }
    }
    SeqResetSequenceIndexes(io_seqTipSeq);
    TipCount::Write2(io_seqTipSeq, _str1000ulTipCounter, ML_STAR);
    MECC::TraceComment(Translate("----------TIP HANDLING SMT : RESET 1000 ul TIP SEQ : END  ----------"));
    return (blnReturnValue);
  }
} // library namespace
