#pragma once
#include "C:\\Users\\djross\\Documents\\LMSFoundry\\Hamilton methods and libraries\\Wide Bore Tips\\Package import\\HSLDevLib.hsl"
#include "C:\\Users\\djross\\Documents\\LMSFoundry\\Hamilton methods and libraries\\Wide Bore Tips\\Package import\\HSLML_STARLib.hsl"
#include "C:\\Users\\djross\\Documents\\LMSFoundry\\Hamilton methods and libraries\\Wide Bore Tips\\Package import\\HSLStrLib.hsl"
#include "C:\\Users\\djross\\Documents\\LMSFoundry\\Hamilton methods and libraries\\Wide Bore Tips\\Package import\\HSLTimLib.hsl"
#include "C:\\Users\\djross\\Documents\\LMSFoundry\\Hamilton methods and libraries\\Wide Bore Tips\\Package import\\HSLUtilLib.hsl"
#include "C:\\Users\\djross\\Documents\\LMSFoundry\\Hamilton methods and libraries\\Wide Bore Tips\\Package import\\HSLSeqLib.hsl"
#include "C:\\Users\\djross\\Documents\\LMSFoundry\\Hamilton methods and libraries\\Wide Bore Tips\\Package import\\HSLFilLib.hsl"
#include "C:\\Users\\djross\\Documents\\LMSFoundry\\Hamilton methods and libraries\\Wide Bore Tips\\Package import\\HSL_WasteChute.hsl"
#include "C:\\Users\\djross\\Documents\\LMSFoundry\\Hamilton methods and libraries\\Wide Bore Tips\\Package import\\DPX\\ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "C:\\Users\\djross\\Documents\\LMSFoundry\\Hamilton methods and libraries\\Wide Bore Tips\\Package import\\DPXSmartHelper\\TipLength\\DPXPreCuttedTipsLib.hs_"
#include "C:\\Users\\djross\\Documents\\LMSFoundry\\Hamilton methods and libraries\\Wide Bore Tips\\Package import\\HSLMthLib.hsl"
#include "C:\\Users\\djross\\Documents\\LMSFoundry\\Hamilton methods and libraries\\Wide Bore Tips\\Package import\\HSLLabwrAccess\\HSLLabwrAccess.hsl"
#include "C:\\Users\\djross\\Documents\\LMSFoundry\\Hamilton methods and libraries\\Wide Bore Tips\\Package import\\DPX\\HSLTrcLib.hsl"
#include "C:\\Users\\djross\\Documents\\LMSFoundry\\Hamilton methods and libraries\\Wide Bore Tips\\Package import\\HSLExtensions\\Array.hsl"
#include "C:\\Users\\djross\\Documents\\LMSFoundry\\Hamilton methods and libraries\\Wide Bore Tips\\Package import\\HSLExtensions\\Venus.hsl"
#include "C:\\Users\\djross\\Documents\\LMSFoundry\\Hamilton methods and libraries\\Wide Bore Tips\\Package import\\DPX\\ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "C:\\Users\\djross\\Documents\\LMSFoundry\\Hamilton methods and libraries\\Wide Bore Tips\\Package import\\HSLUtilLib2.hsl"
#include "C:\\Users\\djross\\Documents\\LMSFoundry\\Hamilton methods and libraries\\Wide Bore Tips\\Package import\\HSLLabwareStateLib.hsl"
#include "C:\\Users\\djross\\Documents\\LMSFoundry\\Hamilton methods and libraries\\Wide Bore Tips\\Package import\\HSLMETEDLib.hs_"
#include "C:\\Users\\djross\\Documents\\LMSFoundry\\Hamilton methods and libraries\\Wide Bore Tips\\Package import\\HSLMECCLib_01.hs_"

namespace DPX_SMARTHELPER {
  global variable gbl_str_Default1mLChannelVariable;
  global variable gbl_int_1mLChannelsInstalled;
  global variable gbl_str_UserName;
  global variable gbl_int_Sim_State;
  global variable gbl_str_STARSerialNum;
  global variable gbl_str_Single5mLChannelVariable;
  global variable gbl_str_Single1mLChannelVariable;
  global variable gbl_str_DateAndTime;
  global variable gbl_int_5mLChannelsInstalled;
  global variable gbl_str_Default5mLChannelVariable;
  global variable gbl_str_HamiltonDirectory;
  global variable gbl_bln_AutoLoad_Installed;
  global variable gbl_str_InstrumentViewName;
  global variable gbl_int_AutoLoadHome;
  global variable gbl_bln_HasCoRe96Head;
  global variable gbl_int_1mLRasterWidth;
  function Add_Whitespace_To_Str( variable i_String, variable i_TotalCharactersToOccupy, variable & io_StringToConcat ) void ;
  function Add_Zero_To_Str( variable i_String, variable i_TotalCharactersToOccupy, variable & io_StringToConcat ) void ;
  function ConvertmmToFWParameterWithCorrection( variable i_flt_Length, variable i_flt_CorrectionLength, variable i_int_NumCharacters, variable i_int_MultFactor, variable & o_str_FWParam ) variable ;
  function Dispense96HeadOverSequence( device & ML_STAR, sequence i_TargetSequence ) void ;
  function DispenseChannelsOverSequence( device & ML_STAR, sequence i_TargetSequence ) void ;
  function DispenseChannelsOverSequence_2( device & ML_STAR, sequence i_TargetSequence, variable i_flt_DispenseHeight, variable i_flt_DispenseSpeed ) void ;
  function DispenseChannelsOverSequence_3( device & ML_STAR, sequence i_TargetSequence, variable i_flt_DispenseHeight, variable i_flt_DispenseSpeed, variable i_flt_DispenseVolume ) void ;
  function Dose_1mLChannel( device & ML_STAR ) void ;
  function Dose_96Head( device & ML_STAR ) void ;
  function GET_TipType_Parameters( variable i_str_TipType, variable & o_flt_MaxTipVolume, variable & o_int_ChannelType, variable & o_int_TipType, variable & o_int_Channels_Available, variable & o_str_SingleChannelVariable, variable & o_str_DefaultChannelVariable ) void ;
  function Init_96Head( device & ML_STAR ) void ;
  function Init_SmartHelper( device & ML_STAR ) void ;
  function MoveChannel_RelativeZPosition( device & ML_STAR, variable i_NumberOfChannels, variable i_Distance, variable i_Speed, variable i_Direction ) void ;
  function MoveChannel_ZPosition( device & ML_STAR, variable i_Position, variable i_Speed ) void ;
  function MoveChannelsOverSequence( device & ML_STAR, sequence i_TargetSequence ) void ;
  function MoveHeadOverSequence( device & ML_STAR, sequence i_TargetSequence ) void ;
  function MoveHead_RelativeZPosition( device & ML_STAR, variable i_Distance, variable i_Speed, variable i_Direction ) void ;
  function MoveHead_ZPosition( device & ML_STAR, variable i_Position, variable i_Speed ) void ;
  function MovePlunger_96Head( device & ML_STAR, variable i_Volume, variable i_AspOrDisp, variable i_Speed ) void ;
  function Positions_Remaining( sequence & i_Seq ) variable ;
  function ResetTipLength( device & ML_STAR, variable i_TipType ) variable ;
  function STARInit( device & ML_STAR ) void ;
  function SetTipLength( device & ML_STAR, variable i_TipType, variable i_flt_NewTipLength, variable & o_flt_NewTipVolume ) variable ;
  function Shake_Waste( device & ML_STAR, variable i_Duration ) void ;
  function TipOnTipPickup_Channels( device & Device, variable i_intChannelsToMove, sequence & i_seqTarget, variable i_ZHeight, variable i_TraverseHeight ) variable ;
  function UTIL_Trace2Sequences( sequence & i_FirstSequence, sequence & i_SecondSequence ) void ;
  private function xTenTurnToString( variable _floatNum, variable _formatLength ) variable ;
  function _InitLibrary() {
    DPXPRECUTTEDTIPSLIB::_InitLibrary();
  }
  function _ExitLibrary() {
    DPXPRECUTTEDTIPSLIB::_ExitLibrary();
  }

  function Init_SmartHelper( device & ML_STAR ) void {
    private variable ChannelCounter;
    private variable str_Time;
    private variable str_Date;
    private variable sub_int_backslash_position;
    private variable str_StringWithSerialNum;
    private variable strFunctionName;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    Trace ("Current Function: ",strFunctionName);
    gbl_int_Sim_State = HSLML_STAR::IsSimulatorMode(ML_STAR);
    gbl_str_UserName = Util::GetUserName();
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_StringWithSerialNum = arrRetValues[3];
    }
    gbl_str_STARSerialNum = StrRight(str_StringWithSerialNum, 4);
    gbl_int_1mLChannelsInstalled = DevGetCfgValueWithKey(ML_STAR, 1);
    gbl_str_Default1mLChannelVariable = Translate("");
    gbl_str_Single1mLChannelVariable = Translate("");
    {
      for(ChannelCounter = 0; ChannelCounter < gbl_int_1mLChannelsInstalled;)
      {
        ChannelCounter = ChannelCounter + 1;
        if (gbl_int_1mLChannelsInstalled >= ChannelCounter)
        {
          gbl_str_Default1mLChannelVariable = gbl_str_Default1mLChannelVariable + Translate("1");
        }
        else
        {
          gbl_str_Default1mLChannelVariable = gbl_str_Default1mLChannelVariable + Translate("0");
        }
        if (ChannelCounter == 1)
        {
          gbl_str_Single1mLChannelVariable = gbl_str_Single1mLChannelVariable + Translate("1");
        }
        else
        {
          gbl_str_Single1mLChannelVariable = gbl_str_Single1mLChannelVariable + Translate("0");
        }
      }
    }
    gbl_int_1mLRasterWidth = DevGetCfgValueWithKey(ML_STAR, 26);
    str_Date = TimGetFormattedDate(Translate("%d%b%Y"));
    str_Time = TimGetFormattedTime(Translate("%I_%M%p"));
    gbl_str_DateAndTime = StrConcat4(str_Date, Translate("-"), str_Time, Translate(""));
    Trace("Simulation State = ", gbl_int_Sim_State);
    Trace("Operator Login = ", gbl_str_UserName);
    Trace("STAR Serial Number = ", gbl_str_STARSerialNum);
    Trace("Number of 1mL Channels Installed = ", gbl_int_1mLChannelsInstalled);
    Trace("1mL Raster Width = ", gbl_int_1mLRasterWidth);
    Trace("Number of 5mL Channels Installed = ", gbl_int_5mLChannelsInstalled);
    Trace("Timestamp = ", gbl_str_DateAndTime);
    gbl_str_HamiltonDirectory = FilGetSystemPath();
    sub_int_backslash_position = StrReverseFind(gbl_str_HamiltonDirectory, Translate("\\"));
    sub_int_backslash_position = sub_int_backslash_position + 1;
    gbl_str_HamiltonDirectory = StrLeft(gbl_str_HamiltonDirectory, sub_int_backslash_position);
    gbl_bln_HasCoRe96Head = DevGetCfgValueWithKey(ML_STAR, 24);
    gbl_bln_AutoLoad_Installed = DevGetCfgValueWithKey(ML_STAR, 3);
    gbl_str_InstrumentViewName = DevGetInstrumentViewName(ML_STAR);
    Trace("Instrument View Name = ", gbl_str_InstrumentViewName);
    if (gbl_str_InstrumentViewName == "Microlab® STAR")
    {
      gbl_int_AutoLoadHome = 54;
    }
    if (gbl_str_InstrumentViewName == "Microlab® STARlet")
    {
      gbl_int_AutoLoadHome = 35;
    }
    if (gbl_str_InstrumentViewName == "Microlab® STARPlus")
    {
      gbl_int_AutoLoadHome = 35;
    }
    Trace (strFunctionName," Complete");
  }

  function Positions_Remaining( sequence & i_Seq ) variable {
    private variable Curr_Pos;
    private variable o_sub_PosRemaining;
    private variable End_Pos;
    private variable strFunctionName;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    Trace ("Current Function: ",strFunctionName);
    End_Pos = i_Seq.GetCount();
    Curr_Pos = i_Seq.GetCurrentPosition();
    if (Curr_Pos == 0)
    {
      o_sub_PosRemaining = 0;
    }
    else
    {
      o_sub_PosRemaining = End_Pos - Curr_Pos;
      o_sub_PosRemaining = o_sub_PosRemaining + 1;
    }
    return (o_sub_PosRemaining);
    Trace (strFunctionName," Complete");
  }

  function GET_TipType_Parameters( variable i_str_TipType, variable & o_flt_MaxTipVolume, variable & o_int_ChannelType, variable & o_int_TipType, variable & o_int_Channels_Available, variable & o_str_SingleChannelVariable, variable & o_str_DefaultChannelVariable ) void {
    private variable strFunctionName;
    o_flt_MaxTipVolume = 0;
    o_int_ChannelType = 0;
    o_int_TipType = 0;
    o_int_Channels_Available = 0;
    o_str_SingleChannelVariable = 0;
    o_str_DefaultChannelVariable = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    Trace ("Current Function: ",strFunctionName);
    if (i_str_TipType == "5mL")
    {
      o_flt_MaxTipVolume = 5000;
      o_int_ChannelType = 5;
      o_int_TipType = 25;
      o_int_Channels_Available = gbl_int_5mLChannelsInstalled;
      o_str_SingleChannelVariable = gbl_str_Single5mLChannelVariable;
      o_str_DefaultChannelVariable = gbl_str_Default5mLChannelVariable;
    }
    else
    {
      o_int_ChannelType = 1;
      o_int_Channels_Available = gbl_int_1mLChannelsInstalled;
      o_str_SingleChannelVariable = gbl_str_Single1mLChannelVariable;
      o_str_DefaultChannelVariable = gbl_str_Default1mLChannelVariable;
      if (i_str_TipType == "1000uL")
      {
        o_flt_MaxTipVolume = 1000;
        o_int_TipType = 4;
      }
      else
      {
        if (i_str_TipType == "300uL")
        {
          o_flt_MaxTipVolume = 300;
          o_int_TipType = 0;
        }
        else
        {
          if (i_str_TipType == "50uL")
          {
            o_flt_MaxTipVolume = 50;
            o_int_TipType = 22;
          }
        }
      }
    }
    Trace (strFunctionName," Complete");
  }

  function STARInit( device & ML_STAR ) void {
    private dialog customDialog_1;
    private variable strFunctionName;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    Trace ("Current Function: ",strFunctionName);
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    Trace (strFunctionName," Complete");
  }

  function UTIL_Trace2Sequences( sequence & i_FirstSequence, sequence & i_SecondSequence ) void {
    private variable int_SizeOfFirstSeq;
    private variable int_SizeOfSecondSeq;
    private sequence SEQ_LeadSequence;
    private sequence SEQ_FollowingSequence;
    private variable str_FollowLabID;
    private variable str_LeadLabID;
    private variable Loop_SEQ_Counter;
    private variable str_FollowPosID;
    private variable str_LeadPosID;
    i_FirstSequence.SetCurrentPosition(1);
    i_SecondSequence.SetCurrentPosition(1);
    int_SizeOfFirstSeq = SeqGetTotal(i_FirstSequence);
    int_SizeOfSecondSeq = SeqGetTotal(i_SecondSequence);
    if (int_SizeOfFirstSeq >= int_SizeOfSecondSeq)
    {
      SeqCopySequence(SEQ_LeadSequence, i_FirstSequence);
      SeqCopySequence(SEQ_FollowingSequence, i_SecondSequence);
    }
    else
    {
      SeqCopySequence(SEQ_LeadSequence, i_SecondSequence);
      SeqCopySequence(SEQ_FollowingSequence, i_FirstSequence);
    }
    {
      Loop_SEQ_Counter = 0;
      while (
         (SEQ_LeadSequence.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, SEQ_LeadSequence, 1);
        Loop_SEQ_Counter = Loop_SEQ_Counter + 1;
        str_LeadLabID = SeqGetLabwareId(SEQ_LeadSequence);
        str_LeadPosID = SeqGetPositionId(SEQ_LeadSequence);
        onerror goto errLabel_2 ;
        err.Clear();
        str_FollowLabID = SeqGetLabwareId(SEQ_FollowingSequence);
        str_FollowPosID = SeqGetPositionId(SEQ_FollowingSequence);
        errLabel_2 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          str_FollowLabID = Translate("EMPTY");
          str_FollowPosID = Translate("EMPTY");
        }   /* end if from skip handler if no error */
        Trace("Trace 2 Sequences : ", str_LeadLabID, " : ", str_LeadPosID, " || ", str_FollowLabID, " : ", str_FollowPosID);
        SeqIncrement(SEQ_LeadSequence, 1);
        SeqIncrement(SEQ_FollowingSequence, 1);
        if (
           (SEQ_LeadSequence.GetCurrentPosition() > 0 && SEQ_LeadSequence.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      SEQ_LeadSequence.SetMax(SEQ_LeadSequence.GetTotal());
      SEQ_LeadSequence.SetCurrentPosition(1);
    }
  }

  function Add_Whitespace_To_Str( variable i_String, variable i_TotalCharactersToOccupy, variable & io_StringToConcat ) void {
    private variable str_Length;
    private variable NumberOfSpaces;
    private variable SpaceCounter;
    private variable strFunctionName;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    Trace ("Current Function: ",strFunctionName);
    i_String = StrConcat2(i_String, Translate(""));
    str_Length = StrGetLength(i_String);
    NumberOfSpaces = i_TotalCharactersToOccupy - str_Length;
    {
      for(SpaceCounter = 0; SpaceCounter < NumberOfSpaces;)
      {
        SpaceCounter = SpaceCounter + 1;
        i_String = i_String + Translate(" ");
      }
    }
    io_StringToConcat = io_StringToConcat + i_String;
    Trace (strFunctionName," Complete");
  }

  function Shake_Waste( device & ML_STAR, variable i_Duration ) void {
    private timer Shake_Timer;
    private variable strFunctionName;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    Trace ("Current Function: ",strFunctionName);
    WasteChute::WasteChuteShakeStart(ML_STAR, 1, 40, WasteChute::TRACE_LEVEL_NONE);
    if( 0 == Shake_Timer.SetTimer(i_Duration) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == Shake_Timer.WaitTimer(hslTrue, hslFalse) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    WasteChute::WasteChuteShakeStop(ML_STAR, 1);
    Trace (strFunctionName," Complete");
  }

  function SetTipLength( device & ML_STAR, variable i_TipType, variable i_flt_NewTipLength, variable & o_flt_NewTipVolume ) variable {
    private variable sub_int_ReturnValue;
    private variable o_fltVolumeOfBoreTips;
    o_flt_NewTipVolume = 0;
    Trace("BEGIN SetCuttedTip Length");
    Trace("TipType = ", i_TipType);
    sub_int_ReturnValue = DPXPRECUTTEDTIPSLIB::SetCuttedTipLenght(ML_STAR, i_TipType, i_flt_NewTipLength, o_fltVolumeOfBoreTips);
    if (sub_int_ReturnValue == 0)
    {
      Trace("Set Cutted Tip Failure!");
      return (ASWGLOBAL::BOOL::FALSE);
    }
    Trace("Set Cutted Tip Success!");
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function ResetTipLength( device & ML_STAR, variable i_TipType ) variable {
    private variable sub_str_FunctionName;
    sub_str_FunctionName = Translate("");
    sub_str_FunctionName = GetFunctionName();
    TRACELEVEL::Release_Trace4(Translate("==== "), sub_str_FunctionName, Translate(" ===="), Translate(" BEGIN"));
    DPXPRECUTTEDTIPSLIB::ResetCuttedTipLenght(ML_STAR, i_TipType);
    TRACELEVEL::Release_Trace4(Translate("==== "), sub_str_FunctionName, Translate(" ===="), Translate(" Complete"));
    return (ASWGLOBAL::BOOL::TRUE);
  }

  function MoveHeadOverSequence( device & ML_STAR, sequence i_TargetSequence ) void {
    private variable fLabRZ;
    private variable sub_str_LabID;
    private variable fLabX;
    private variable fLabY;
    private variable fLabZ;
    private variable sub_str_FWParam;
    private variable strFunctionName;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    Trace ("Current Function: ",strFunctionName);
    sub_str_LabID = SeqGetLabwareId(i_TargetSequence);
    HSLLabwrAccess::AbsolutePositionValuesGetForLabwareID(ML_STAR, sub_str_LabID, fLabX, fLabY, fLabZ, fLabRZ);
    fLabX = xTenTurnToString(fLabX, 5);
    fLabY = xTenTurnToString(fLabY, 4);
    sub_str_FWParam = "xs" + fLabX + "xd0" + "yh" + fLabY + "za3425";
    Trace("Labware to Move to = ", sub_str_LabID);
    Trace("FW Command = ", sub_str_FWParam);
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    Trace (strFunctionName," Complete");
  }

  private function xTenTurnToString( variable _floatNum, variable _formatLength ) variable {
    private variable leadingZeroesToAdd;
    private variable sLeadZeroes;
    private variable ilength;
    private variable loopCounter4;
    sLeadZeroes = Translate("");
    _floatNum = _floatNum * 10;
    _floatNum = MthCeiling(_floatNum);
    _floatNum = StrIStr(_floatNum);
    ilength = StrGetLength(_floatNum);
    leadingZeroesToAdd = _formatLength - ilength;
    {
      for(loopCounter4 = 0; loopCounter4 < leadingZeroesToAdd;)
      {
        loopCounter4 = loopCounter4 + 1;
        sLeadZeroes = sLeadZeroes + Translate("0");
      }
    }
    _floatNum = sLeadZeroes + _floatNum;
    if(0){
      TrcTrace(Translate("returned parameter value for FW command -- "), _floatNum);
    }
    return (_floatNum);
  }

  function MoveHead_ZPosition( device & ML_STAR, variable i_Position, variable i_Speed ) void {
    private variable sub_str_FWParams;
    private variable strFunctionName;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    Trace ("Current Function: ",strFunctionName);
    sub_str_FWParams = Translate("");
    sub_str_FWParams = "za" + i_Position + "zv" + i_Speed;
    Trace("MoveHead_ZPosition : ", sub_str_FWParams);
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    Trace (strFunctionName," Complete");
  }

  function MovePlunger_96Head( device & ML_STAR, variable i_Volume, variable i_AspOrDisp, variable i_Speed ) void {
    private variable sub_str_FWParams;
    private variable _dt;
    private variable _dv;
    private variable _ds;
    private variable sub_int_Steps;
    private variable sub_int_Length;
    private variable Loop_Char_Counter;
    private variable int_strSpeedLength;
    private variable int_addZerosToSpeed;
    private variable loopCounter1;
    private variable strFunctionName;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    Trace ("Current Function: ",strFunctionName);
    sub_str_FWParams = Translate("");
    sub_int_Steps = i_Volume / 0.018509877;
    sub_int_Steps = MthCeiling(sub_int_Steps);
    sub_int_Steps = StrConcat2(sub_int_Steps, Translate(""));
    sub_int_Length = StrGetLength(sub_int_Steps);
    {
      for(Loop_Char_Counter = 0; Loop_Char_Counter < 5;)
      {
        Loop_Char_Counter = Loop_Char_Counter + 1;
        if (sub_int_Length < Loop_Char_Counter)
        {
          sub_int_Steps = StrConcat2(Translate("0"), sub_int_Steps);
        }
      }
    }
    _ds = Translate("ds") + sub_int_Steps;
    _dt = StrConcat2(Translate("dt"), i_AspOrDisp);
    i_Speed = StrIStr(i_Speed);
    int_strSpeedLength = StrGetLength(i_Speed);
    if (int_strSpeedLength < 5)
    {
      int_addZerosToSpeed = 5 - int_strSpeedLength;
      {
        for(loopCounter1 = 0; loopCounter1 < int_addZerosToSpeed;)
        {
          loopCounter1 = loopCounter1 + 1;
          i_Speed = StrConcat2(Translate("0"), i_Speed);
        }
      }
    }
    _dv = StrConcat2(Translate("dv"), i_Speed);
    sub_str_FWParams = _ds + _dt + _dv;
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    Trace (strFunctionName," Complete");
  }

  function MoveHead_RelativeZPosition( device & ML_STAR, variable i_Distance, variable i_Speed, variable i_Direction ) void {
    private variable sub_str_FWParams;
    private variable strFunctionName;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    Trace ("Current Function: ",strFunctionName);
    sub_str_FWParams = Translate("");
    sub_str_FWParams = "zs" + i_Distance + "zv" + i_Speed + "zt" + i_Direction;
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    Trace (strFunctionName," Complete");
  }

  function MoveChannel_RelativeZPosition( device & ML_STAR, variable i_NumberOfChannels, variable i_Distance, variable i_Speed, variable i_Direction ) void {
    private variable sub_str_FWParams;
    private variable sub_str_FWCommand;
    private variable Loop_Channel_Counter;
    private variable strFunctionName;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    Trace ("Current Function: ",strFunctionName);
    {
      for(Loop_Channel_Counter = 0; Loop_Channel_Counter < i_NumberOfChannels;)
      {
        Loop_Channel_Counter = Loop_Channel_Counter + 1;
        sub_str_FWCommand = StrConcat4(Translate("P"), Loop_Channel_Counter, Translate("ZS"), Translate(""));
        sub_str_FWParams = Translate("");
        sub_str_FWParams = "zs" + i_Distance + "zt" + i_Direction + "zv" + i_Speed;
        Trace("MoveChannel_RelativeZPosition : ", sub_str_FWCommand, " | ", sub_str_FWParams);
        ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      }
    }
    Trace (strFunctionName," Complete");
  }

  function MoveChannel_ZPosition( device & ML_STAR, variable i_Position, variable i_Speed ) void {
    private variable sub_str_FWParams;
    private variable strFunctionName;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    Trace ("Current Function: ",strFunctionName);
    sub_str_FWParams = Translate("");
    sub_str_FWParams = "za" + i_Position + "zv" + i_Speed;
    Trace("MoveChannel_ZPosition : ", sub_str_FWParams);
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    Trace (strFunctionName," Complete");
  }

  function Dose_1mLChannel( device & ML_STAR ) void {
    private variable strFunctionName;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    Trace ("Current Function: ",strFunctionName);
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    Trace (strFunctionName," Complete");
  }

  function MoveChannelsOverSequence( device & ML_STAR, sequence i_TargetSequence ) void {
    private variable fLabRZ;
    private variable sub_str_LabID;
    private variable sub_str_FWParam;
    private variable fLabX;
    private variable fLabY;
    private variable fLabZ;
    private variable sub_str_FWCommand;
    private variable Loop_Channel_Counter;
    private variable sub_str_PosID;
    private variable strFunctionName;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    Trace ("Current Function: ",strFunctionName);
    {
      for(Loop_Channel_Counter = 0; Loop_Channel_Counter < gbl_int_1mLChannelsInstalled;)
      {
        Loop_Channel_Counter = Loop_Channel_Counter + 1;
        sub_str_LabID = SeqGetLabwareId(i_TargetSequence);
        sub_str_PosID = SeqGetPositionId(i_TargetSequence);
        sub_str_FWCommand = StrConcat4(Translate("P"), Loop_Channel_Counter, Translate("ZS"), Translate(""));
      }
    }
    HSLLabwrAccess::AbsolutePositionValuesGetForLabwareID(ML_STAR, sub_str_LabID, fLabX, fLabY, fLabZ, fLabRZ);
    fLabX = xTenTurnToString(fLabX, 5);
    fLabY = xTenTurnToString(fLabY, 4);
    if(0){
      sub_str_FWParam = "xs" + fLabX + "xd0" + "yh" + fLabY + "za3425";
      Trace("Labware to Move to = ", sub_str_LabID);
      Trace("FW Command = ", sub_str_FWParam);
    }
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    Trace (strFunctionName," Complete");
  }

  function DispenseChannelsOverSequence( device & ML_STAR, sequence i_TargetSequence ) void {
    private variable sub_str_LabID;
    private variable sub_str_FWParam;
    private variable Loop_Channel_Counter;
    private variable sub_str_PosID;
    private variable fLabX;
    private variable fLabY;
    private variable sub_ARR_Position[];
    private variable sub_int_PosRemaining;
    private variable _mc;
    private variable _ip;
    private variable _yp;
    private variable _zr;
    private variable _mv;
    private variable _xp;
    private variable _dm;
    private variable _lv;
    private variable _fp;
    private variable _tm;
    private variable _it;
    private variable _mh;
    private variable _zu;
    private variable _wt;
    private variable _ta;
    private variable _ds;
    private variable _zx;
    private variable _po;
    private variable _ba;
    private variable _ll;
    private variable _ss;
    private variable _de;
    private variable _lm;
    private variable _dv;
    private variable _gi;
    private variable _te;
    private variable _gj;
    private variable _mp;
    private variable _zl;
    private variable _gk;
    private variable _rv;
    private variable _lp;
    private variable _th;
    private variable _dj;
    private variable _ms;
    private variable _zo;
    private variable sub_str_ZHeightAfterDisp;
    private variable strFunctionName;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    Trace ("Current Function: ",strFunctionName);
    sub_str_FWParam = Translate("");
    sub_str_ZHeightAfterDisp = Translate("1921");
    fLabX = 0;
    fLabY = 0;
    _dm = Translate("dm");
    _tm = Translate("tm");
    _xp = Translate("xp");
    _yp = Translate("yp");
    _zx = Translate("zx");
    _lp = Translate("lp");
    _zl = Translate("zl");
    _ip = Translate("ip0000&");
    _it = Translate("it0&");
    _fp = Translate("fp0000&");
    _th = Translate("th2371");
    _te = Translate("te") + sub_str_ZHeightAfterDisp;
    _dv = Translate("dv");
    _ds = Translate("ds");
    _ss = Translate("ss2500&");
    _rv = Translate("rv000&");
    _ta = Translate("ta");
    _ba = Translate("ba0000&");
    _lm = Translate("lm0&");
    _zo = Translate("zo005&");
    _ll = Translate("ll1&");
    _lv = Translate("lv1&");
    _de = Translate("de0010&");
    _mv = Translate("mv00000&");
    _mc = Translate("mc00&");
    _mp = Translate("mp000&");
    _ms = Translate("ms0010&");
    _wt = Translate("wt00&");
    _gi = Translate("gi000&");
    _gj = Translate("gj0");
    _gk = Translate("gk0");
    _zu = Translate("zu");
    _dj = Translate("dj00");
    _zr = Translate("zr");
    _mh = Translate("mh0000&");
    _po = Translate("po0000");
    sub_str_LabID = SeqGetLabwareId(i_TargetSequence);
    {
      for(Loop_Channel_Counter = 0; Loop_Channel_Counter < gbl_int_1mLChannelsInstalled;)
      {
        Loop_Channel_Counter = Loop_Channel_Counter + 1;
        sub_int_PosRemaining = Positions_Remaining(i_TargetSequence);
        if (sub_int_PosRemaining > 0)
        {
          sub_str_PosID = SeqGetPositionId(i_TargetSequence);
          sub_ARR_Position.SetSize(0);
          ML_STAR.GetLabwarePosition(sub_str_LabID, sub_ARR_Position, sub_str_PosID);
          fLabX = sub_ARR_Position[0];
          fLabY = sub_ARR_Position[1];
          fLabX = xTenTurnToString(fLabX, 5);
          fLabY = xTenTurnToString(fLabY, 4);
          if (Loop_Channel_Counter == 1)
          {
            _dm = _dm + "1";
            _tm = _tm + "1";
            _xp = _xp + fLabX;
            _yp = _yp + fLabY;
            _zx = _zx + "1872";
            _lp = _lp + "2321";
            _zl = _zl + "1921";
            _dv = _dv + "02740";
            _ds = _ds + "4000";
            _ta = _ta + "050";
            _zu = _zu + "0032";
            _zr = _zr + "06180";
          }
          else
          {
            _dm = _dm + " 1";
            _tm = _tm + " 1";
            _xp = _xp + " " + fLabX;
            _yp = _yp + " " + fLabY;
            _zx = _zx + " 1872";
            _lp = _lp + " 2321";
            _zl = _zl + " 1921";
            _dv = _dv + " 02740";
            _ds = _ds + " 4000";
            _ta = _ta + " 050";
            _zu = _zu + " 0032";
            _zr = _zr + " 06180";
          }
          SeqIncrement(i_TargetSequence, 1);
        }
        else
        {
          _dm = _dm + " 0";
          _tm = _tm + " 0";
          _xp = _xp + " 00000";
          _yp = _yp + " 0000";
          _zx = _zx + " 0000";
          _lp = _lp + " 2450";
          _zl = _zl + " 2450";
          _dv = _dv + " 00000";
          _ds = _ds + " 2000";
          _ta = _ta + " 000";
          _zu = _zu + " 0000";
          _zr = _zr + " 00000";
        }
      }
    }
    sub_str_FWParam = _dm + _tm + _xp + _yp + _zx + _lp + _zl + _ip + _it + _fp + _th + _te + _dv + _ds + _ss + _rv + _ta +
    _ba + _lm + _zo + _ll + _lv + _de + _mv + _mc + _mp + _ms + _wt + _gi + _gj + _gk + _zu + _dj + _zr + _mh +
    _po;
    Trace ("DS FW Parameter: ",sub_str_FWParam);
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    Trace (strFunctionName," Complete");
  }

  function Dose_96Head( device & ML_STAR ) void {
    private variable strFunctionName;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    Trace ("Current Function: ",strFunctionName);
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    Trace (strFunctionName," Complete");
  }

  function Init_96Head( device & ML_STAR ) void {
    private variable strFunctionName;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    Trace ("Current Function: ",strFunctionName);
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    Trace (strFunctionName," Complete");
  }

  function Dispense96HeadOverSequence( device & ML_STAR, sequence i_TargetSequence ) void {
    private variable sub_str_LabID;
    private variable _ip;
    private variable _mc;
    private variable _yp;
    private variable _dm;
    private variable _xp;
    private variable sub_int_PosRemaining;
    private variable _zr;
    private variable _mv;
    private variable sub_str_FWParam;
    private variable _lv;
    private variable _tm;
    private variable _fp;
    private variable _it;
    private variable _zu;
    private variable _mh;
    private variable Loop_Channel_Counter;
    private variable _wt;
    private variable sub_str_PosID;
    private variable sub_str_ZHeightAfterDisp;
    private variable _ds;
    private variable _ta;
    private variable _zx;
    private variable _po;
    private variable _ba;
    private variable _ss;
    private variable _ll;
    private variable _dv;
    private variable _de;
    private variable fLabX;
    private variable _lm;
    private variable _gi;
    private variable _te;
    private variable fLabY;
    private variable _zl;
    private variable _mp;
    private variable _gj;
    private variable _rv;
    private variable _gk;
    private variable _lp;
    private variable _th;
    private variable _zo;
    private variable _dj;
    private variable _ms;
    private variable sub_ARR_Position[];
    private variable _da;
    private variable _xs;
    private variable _yh;
    private variable _zm;
    private variable _zv;
    private variable _zq;
    private variable _lz;
    private variable _zt;
    private variable _pp;
    private variable _iw;
    private variable _ix;
    private variable _fh;
    private variable _zh;
    private variable _ze;
    private variable _df;
    private variable _dg;
    private variable _es;
    private variable _ev;
    private variable _vt;
    private variable _bv;
    private variable _cm;
    private variable _ej;
    private variable _cs;
    private variable _bs;
    private variable _wh;
    private variable _hv;
    private variable _hc;
    private variable _hp;
    private variable _hs;
    private variable _mj;
    private variable _cr;
    private variable _cj;
    private variable _cx;
    private variable _xd;
    private variable _cw;
    private variable strFunctionName;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    Trace ("Current Function: ",strFunctionName);
    sub_str_FWParam = Translate("");
    sub_str_ZHeightAfterDisp = Translate("1921");
    fLabX = 0;
    fLabY = 0;
    _da = Translate("da");
    _xs = Translate("xs");
    _xd = Translate("xd0");
    _yh = Translate("yh");
    _zm = Translate("zm");
    _lz = Translate("lz");
    _zt = Translate("zt");
    _iw = Translate("iw000&");
    _ix = Translate("ix0&");
    _fh = Translate("fh000&");
    _zh = Translate("zh2371");
    _ze = Translate("ze") + sub_str_ZHeightAfterDisp;
    _df = Translate("df");
    _dg = Translate("dg");
    _es = Translate("es2500&");
    _ev = Translate("ev000&");
    _vt = Translate("vt");
    _bv = Translate("bv00000&");
    _cm = Translate("cm0&");
    _cs = Translate("cs1&");
    _bs = Translate("bs0010&");
    _hv = Translate("hv00000&");
    _hc = Translate("hc00&");
    _hp = Translate("hp000&");
    _hs = Translate("hs0010&");
    _wh = Translate("wh00&");
    _cr = Translate("cr000&");
    _cj = Translate("cj0");
    _cx = Translate("cx0");
    _cw = Translate("cw");
    _zv = Translate("zv");
    _ej = Translate("ej00");
    _zq = Translate("zq");
    _mj = Translate("mj000&");
    _pp = Translate("pp0000");
    sub_str_LabID = SeqGetLabwareId(i_TargetSequence);
    {
      for(Loop_Channel_Counter = 0; Loop_Channel_Counter < gbl_int_1mLChannelsInstalled;)
      {
        Loop_Channel_Counter = Loop_Channel_Counter + 1;
        sub_int_PosRemaining = Positions_Remaining(i_TargetSequence);
        if (sub_int_PosRemaining > 0)
        {
          sub_str_PosID = SeqGetPositionId(i_TargetSequence);
          sub_ARR_Position.SetSize(0);
          ML_STAR.GetLabwarePosition(sub_str_LabID, sub_ARR_Position, sub_str_PosID);
          fLabX = sub_ARR_Position[0];
          fLabY = sub_ARR_Position[1];
          fLabX = xTenTurnToString(fLabX, 5);
          fLabY = xTenTurnToString(fLabY, 4);
          if (Loop_Channel_Counter == 1)
          {
            _dm = _dm + "1";
            _tm = _tm + "1";
            _xp = _xp + fLabX;
            _yp = _yp + fLabY;
            _zx = _zx + "1871";
            _lp = _lp + "2321";
            _zl = _zl + "1921";
            _dv = _dv + "02740";
            _ds = _ds + "4000";
            _ta = _ta + "050";
            _zu = _zu + "0032";
            _zr = _zr + "06180";
          }
          else
          {
            _dm = _dm + " 1";
            _tm = _tm + " 1";
            _xp = _xp + " " + fLabX;
            _yp = _yp + " " + fLabY;
            _zx = _zx + " 1871";
            _lp = _lp + " 2321";
            _zl = _zl + " 1921";
            _dv = _dv + " 02740";
            _ds = _ds + " 4000";
            _ta = _ta + " 050";
            _zu = _zu + " 0032";
            _zr = _zr + " 06180";
          }
          SeqIncrement(i_TargetSequence, 1);
        }
        else
        {
          _dm = _dm + " 0";
          _tm = _tm + " 0";
          _xp = _xp + " 00000";
          _yp = _yp + " 0000";
          _zx = _zx + " 0000";
          _lp = _lp + " 2450";
          _zl = _zl + " 2450";
          _dv = _dv + " 00000";
          _ds = _ds + " 2000";
          _ta = _ta + " 000";
          _zu = _zu + " 0000";
          _zr = _zr + " 00000";
        }
      }
    }
    sub_str_FWParam = _dm + _tm + _xp + _yp + _zx + _lp + _zl + _ip + _it + _fp + _th + _te + _dv + _ds + _ss + _rv + _ta +
    _ba + _lm + _zo + _ll + _lv + _de + _mv + _mc + _mp + _ms + _wt + _gi + _gj + _gk + _zu + _dj + _zr + _mh +
    _po;
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    Trace (strFunctionName," Complete");
  }

  function Add_Zero_To_Str( variable i_String, variable i_TotalCharactersToOccupy, variable & io_StringToConcat ) void {
    private variable str_Length;
    private variable NumberOfSpaces;
    private variable SpaceCounter;
    private variable strFunctionName;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    Trace ("Current Function: ",strFunctionName);
    i_String = StrConcat2(i_String, Translate(""));
    str_Length = StrGetLength(i_String);
    NumberOfSpaces = i_TotalCharactersToOccupy - str_Length;
    {
      for(SpaceCounter = 0; SpaceCounter < NumberOfSpaces;)
      {
        SpaceCounter = SpaceCounter + 1;
        i_String = Translate("0") + i_String;
      }
    }
    io_StringToConcat = io_StringToConcat + i_String;
    Trace (strFunctionName," Complete");
  }

  function TipOnTipPickup_Channels( device & Device, variable i_intChannelsToMove, sequence & i_seqTarget, variable i_ZHeight, variable i_TraverseHeight ) variable {
    private variable intActualStrLength;
    private variable intPositionsRemaining;
    private variable fltAngle;
    private variable intNumChannels;
    private variable intXArraySize;
    private variable strFWParam;
    private variable strChannelVar;
    private variable fltSafeYMin;
    private variable strLabwareID;
    private variable intChannelsPerMove;
    private variable strFunctionName;
    private variable intChannelsRemaining;
    private variable lcChannelNum;
    private variable intChannelsUsed;
    private variable intYIndex;
    private variable lcNumberOfMoves;
    private variable intYArraySize;
    private variable strTraverseHeight;
    private variable fltZCoord;
    private variable strChannelPattern;
    private variable strXString;
    private variable strFWCommand;
    private variable blnSuccess;
    private variable fltYCoordWaste;
    private variable strNumMoves;
    private variable strYString;
    private variable lcYCoord;
    private variable fltYCoord;
    private variable lcXCoord;
    private variable intStrLength;
    private variable intNumMoves;
    private variable strPositionID;
    private variable fltXCoord;
    private variable strZString;
    private variable loopCounter1;
    private variable strYCoord;
    private variable intNumUniqueXValues;
    private variable strXCoord;
    private variable fltXCoordWaste;
    private variable loopCounter4;
    private variable intSeqIncrement;
    private variable intArrayIndex;
    private variable strZHeight;
    private variable fltAdditionalCoordinates;
    private variable loopCounter6;
    private variable intRetValue;
    private variable arrUniqueXValues[];
    private variable arrDoesValueExist[];
    private variable arrYCoord[];
    private variable arrXCoord[];
    private variable arrTempYValues[];
    private variable arrTempYIndex[];
    private variable intRetVal;
    strFunctionName = GetFunctionName();
    Trace ("Current Function: ",strFunctionName);
    intRetVal = 999;
    intChannelsUsed = 0;
    i_TraverseHeight = i_TraverseHeight + 100;
    i_TraverseHeight = i_TraverseHeight * 10.0;
    intPositionsRemaining = 0;
    intRetValue = 0;
    strFunctionName = Translate("");
    arrXCoord.SetSize(0);
    arrYCoord.SetSize(0);
    arrUniqueXValues.SetSize(0);
    fltAngle = 0.0;
    fltXCoordWaste = 0.0;
    fltYCoordWaste = 0.0;
    fltXCoord = 0.0;
    fltYCoord = 0.0;
    fltZCoord = 0.0;
    fltAdditionalCoordinates = 0.0;
    strChannelVar = Translate("");
    intArrayIndex = 0;
    strNumMoves = Translate("");
    blnSuccess = 0;
    fltSafeYMin = 118.0;
    intNumChannels = HSLExtensions::Venus::GetNumberOfChannels(Device);
    if (intNumChannels < i_intChannelsToMove)
    {
      i_intChannelsToMove = intNumChannels;
    }
    intPositionsRemaining = Positions_Remaining(i_seqTarget);
    if (intPositionsRemaining < i_intChannelsToMove)
    {
      Trace ("There are not enough Sequence Positions Remaining to Complete this Move");
      intRetValue = 1;
      return (intRetValue);
    }
    {
      for(lcChannelNum = 0; lcChannelNum < i_intChannelsToMove;)
      {
        lcChannelNum = lcChannelNum + 1;
        strPositionID = SeqGetPositionId(i_seqTarget);
        strLabwareID = SeqGetLabwareId(i_seqTarget);
        DevGetLabwarePositionEx(Device, strLabwareID, strPositionID, fltXCoord, fltYCoord, fltZCoord, fltAngle);
        arrXCoord.AddAsLast(fltXCoord);
        arrYCoord.AddAsLast(fltYCoord);
        arrDoesValueExist.SetSize(0);
        arrDoesValueExist = HSLExtensions::Array::FindValue(arrUniqueXValues, fltXCoord);
        intNumUniqueXValues=arrDoesValueExist.GetSize();
        if (intNumUniqueXValues == 0)
        {
          arrUniqueXValues.AddAsLast(fltXCoord);
        }
        SeqIncrement(i_seqTarget, 1);
      }
    }
    intXArraySize=arrXCoord.GetSize();
    intYArraySize=arrYCoord.GetSize();
    if (intXArraySize != intYArraySize)
    {
      intRetValue = 1;
      Trace ("X Coordinate Array Size Does Not Match Y Coordinate Array Size");
      return (intRetValue);
    }
    intSeqIncrement = lcChannelNum * -1;
    SeqIncrement(i_seqTarget, intSeqIncrement);
    arrUniqueXValues = HSLExtensions::Array::Sort(arrUniqueXValues, HSLExtensions::Framework::Enumerators::SortMode::Ascending, blnSuccess);
    intNumMoves=arrUniqueXValues.GetSize();
    {
      for(lcNumberOfMoves = 0; lcNumberOfMoves < intNumMoves;)
      {
        lcNumberOfMoves = lcNumberOfMoves + 1;
        fltXCoord=arrUniqueXValues.GetAt(lcNumberOfMoves-1);
        if (fltXCoord < fltSafeYMin)
        {
          Trace ("Y coordinate is less then the minimum safe Y");
          intRetValue = 1;
          return (intRetValue);
        }
        arrTempYValues.SetSize(0);
        arrTempYIndex.SetSize(0);
        strPositionID = SeqGetPositionId(Device.Waste);
        strLabwareID = SeqGetLabwareId(Device.Waste);
        DevGetLabwarePositionEx(Device, strLabwareID, strPositionID, fltXCoordWaste, fltYCoordWaste, fltZCoord, fltAngle);
        if (fltXCoord <= fltXCoordWaste)
        {
          arrTempYIndex = HSLExtensions::Array::FindValue(arrXCoord, fltXCoord);
          intChannelsPerMove=arrTempYIndex.GetSize();
          strChannelPattern = Translate("tm");
          {
            for(loopCounter4 = 0; loopCounter4 < intChannelsUsed;)
            {
              loopCounter4 = loopCounter4 + 1;
              strChannelPattern = StrConcat2(strChannelPattern, Translate("0 "));
            }
          }
          {
            for(loopCounter4 = 0; loopCounter4 < intChannelsPerMove;)
            {
              loopCounter4 = loopCounter4 + 1;
              strChannelPattern = StrConcat2(strChannelPattern, Translate("1 "));
            }
          }
          intChannelsRemaining = intNumChannels - (intChannelsPerMove + intChannelsUsed);
          {
            for(loopCounter4 = 0; loopCounter4 < intChannelsRemaining;)
            {
              loopCounter4 = loopCounter4 + 1;
              strChannelPattern = StrConcat2(strChannelPattern, Translate("0 "));
            }
          }
          strChannelPattern = StrTrimRight(strChannelPattern, Translate(" "));
          strXString = Translate("xp");
          fltXCoord = fltXCoord * 10.0;
          strXCoord = StrFStrEx(fltXCoord, 1, 0);
          intStrLength = 5;
          {
            loopCounter1 = 0;
            while (1 == 1)
            {
              loopCounter1 = loopCounter1 + 1;
              intActualStrLength = StrGetLength(strXCoord);
              if (intActualStrLength < intStrLength)
              {
                strXCoord = StrConcat2(Translate("0"), strXCoord);
              }
              else
              {
                break;
              }
            }
          }
          strXString = StrConcat4(strXString, strXCoord, Translate("&"), Translate(""));
          if(0){
            {
              for(lcXCoord = 0; lcXCoord < intChannelsPerMove;)
              {
                lcXCoord = lcXCoord + 1;
                strXString = StrConcat4(strXString, strXCoord, Translate(" "), Translate(""));
              }
            }
            {
              for(loopCounter6 = 0; loopCounter6 < intChannelsRemaining;)
              {
                loopCounter6 = loopCounter6 + 1;
                strXString = StrConcat2(strXString, Translate("0.0 "));
              }
            }
            strXString = StrTrimRight(strXString, Translate(" "));
          }
          strYString = Translate("yp");
          {
            for(loopCounter4 = 0; loopCounter4 < intChannelsUsed;)
            {
              loopCounter4 = loopCounter4 + 1;
              strYString = StrConcat2(strYString, Translate("0000 "));
            }
          }
          {
            for(lcYCoord = 0; lcYCoord < intChannelsPerMove;)
            {
              lcYCoord = lcYCoord + 1;
              intYIndex=arrTempYIndex.GetAt(lcYCoord-1);
              fltYCoord=arrYCoord.GetAt(intYIndex-1);
              fltYCoord = fltYCoord * 10.0;
              arrTempYValues.AddAsLast(fltYCoord);
            }
          }
          arrTempYValues = HSLExtensions::Array::Sort(arrTempYValues, HSLExtensions::Framework::Enumerators::SortMode::Descending, blnSuccess);
          {
            for(lcYCoord = 0; lcYCoord < intChannelsPerMove;)
            {
              lcYCoord = lcYCoord + 1;
              fltYCoord=arrTempYValues.GetAt(lcYCoord-1);
              strYCoord = StrFStrEx(fltYCoord, 1, 0);
              intStrLength = 4;
              {
                loopCounter1 = 0;
                while (1 == 1)
                {
                  loopCounter1 = loopCounter1 + 1;
                  intActualStrLength = StrGetLength(strYCoord);
                  if (intActualStrLength < intStrLength)
                  {
                    strYCoord = StrConcat2(Translate("0"), strYCoord);
                  }
                  else
                  {
                    break;
                  }
                }
              }
              strYString = StrConcat4(strYString, strYCoord, Translate(" "), Translate(""));
            }
          }
          {
            for(loopCounter6 = 0; loopCounter6 < intChannelsRemaining;)
            {
              loopCounter6 = loopCounter6 + 1;
              strYString = StrConcat2(strYString, Translate("0000 "));
            }
          }
          strYString = StrTrimRight(strYString, Translate(" "));
          strTraverseHeight = StrFStrEx(i_TraverseHeight, 1, 0);
          intStrLength = 4;
          {
            loopCounter1 = 0;
            while (1 == 1)
            {
              loopCounter1 = loopCounter1 + 1;
              intActualStrLength = StrGetLength(strTraverseHeight);
              if (intActualStrLength < intStrLength)
              {
                strTraverseHeight = StrConcat2(Translate("0"), strTraverseHeight);
              }
              else
              {
                break;
              }
            }
          }
          strTraverseHeight = StrConcat2(Translate("th"), strTraverseHeight);
          if (lcNumberOfMoves == 1)
          {
            i_ZHeight = i_ZHeight + 100;
            i_ZHeight = i_ZHeight * 10.0;
            strZHeight = StrFStrEx(i_ZHeight, 1, 0);
            intStrLength = 4;
            {
              loopCounter1 = 0;
              while (1 == 1)
              {
                loopCounter1 = loopCounter1 + 1;
                intActualStrLength = StrGetLength(strZHeight);
                if (intActualStrLength < intStrLength)
                {
                  strZHeight = StrConcat2(Translate("0"), strZHeight);
                }
                else
                {
                  break;
                }
              }
            }
            strZString = Translate("zp");
            strZString = StrConcat4(strZString, strZHeight, Translate("&"), Translate(""));
          }
          strFWCommand = Translate("C0JM");
          strFWParam = Translate("");
          strFWParam = StrConcat8(strChannelPattern, strXString, strYString, strTraverseHeight, strZString, Translate(""), Translate(""), Translate(""));
          Trace("The Firmware Parameter String is: ",strFWParam);
          Device._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          Device._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        }
        else
        {
          Trace ("X Coordinate is Beyond the Waste Location: Channels Will Not Be Moved");
        }
        intChannelsUsed = intChannelsUsed + intChannelsPerMove;
      }
    }
    Trace (strFunctionName," Complete");
    intRetValue = 0;
    return (intRetValue);
  }

  function ConvertmmToFWParameterWithCorrection( variable i_flt_Length, variable i_flt_CorrectionLength, variable i_int_NumCharacters, variable i_int_MultFactor, variable & o_str_FWParam ) variable {
    private variable sub_int_StrLength;
    private variable sub_str_FWParam;
    private variable sub_int_Length;
    private variable strFunctionName;
    private variable sub_int_ReturnValue;
    o_str_FWParam = 0;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    Trace ("Current Function: ",strFunctionName);
    i_flt_Length = i_flt_Length * 1.0;
    i_flt_CorrectionLength = i_flt_CorrectionLength * 1.0;
    i_flt_Length = i_flt_Length + i_flt_CorrectionLength;
    i_flt_Length = i_flt_Length * i_int_MultFactor;
    sub_int_Length = MthRound(i_flt_Length, 0);
    sub_int_ReturnValue = StrGetType(sub_int_Length);
    sub_str_FWParam = StrIStr(sub_int_Length);
    o_str_FWParam = Translate("");
    Add_Zero_To_Str(sub_str_FWParam, i_int_NumCharacters, o_str_FWParam);
    sub_int_StrLength = StrGetLength(o_str_FWParam);
    if (sub_int_StrLength != i_int_NumCharacters)
    {
      TRACELEVEL::Trace_04(1, Translate("******************************* "), Translate("The height parameter string for CORE head tip on tip pickup is "), sub_int_StrLength, Translate(" characters long, it must be 5 characters in length ***********************************"));
      sub_int_ReturnValue = 1;
      return (sub_int_ReturnValue);
    }
    Trace (strFunctionName," Complete");
    sub_int_ReturnValue = 0;
    return (sub_int_ReturnValue);
  }

  function DispenseChannelsOverSequence_2( device & ML_STAR, sequence i_TargetSequence, variable i_flt_DispenseHeight, variable i_flt_DispenseSpeed ) void {
    private variable _ip;
    private variable _mc;
    private variable sub_str_LabID;
    private variable _yp;
    private variable _xp;
    private variable _zr;
    private variable sub_int_PosRemaining;
    private variable _dm;
    private variable _mv;
    private variable sub_str_FWParam;
    private variable _lv;
    private variable _tm;
    private variable _fp;
    private variable strFunctionName;
    private variable _it;
    private variable Loop_Channel_Counter;
    private variable _mh;
    private variable _zu;
    private variable sub_str_PosID;
    private variable _wt;
    private variable _zx;
    private variable sub_str_ZHeightAfterDisp;
    private variable _ta;
    private variable _ds;
    private variable _ba;
    private variable _po;
    private variable _ll;
    private variable _ss;
    private variable _dv;
    private variable _lm;
    private variable _de;
    private variable fLabX;
    private variable _te;
    private variable _gi;
    private variable fLabY;
    private variable _mp;
    private variable _zl;
    private variable _gj;
    private variable _lp;
    private variable _gk;
    private variable _rv;
    private variable _th;
    private variable _ms;
    private variable _zo;
    private variable _dj;
    private variable sub_ARR_Position[];
    private variable flt_NotUsed;
    private variable flt_ZBottom;
    private variable flt_DispenseHeight;
    private variable flt_DS;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    Trace ("Current Function: ",strFunctionName);
    sub_str_FWParam = Translate("");
    sub_str_ZHeightAfterDisp = Translate("1921");
    fLabX = 0;
    fLabY = 0;
    _dm = Translate("dm");
    _tm = Translate("tm");
    _xp = Translate("xp");
    _yp = Translate("yp");
    _zx = Translate("zx");
    _lp = Translate("lp");
    _zl = Translate("zl");
    _ip = Translate("ip0000&");
    _it = Translate("it0&");
    _fp = Translate("fp0000&");
    _th = Translate("th2371");
    _te = Translate("te") + sub_str_ZHeightAfterDisp;
    _dv = Translate("dv");
    _ds = Translate("ds");
    _ss = Translate("ss2500&");
    _rv = Translate("rv000&");
    _ta = Translate("ta");
    _ba = Translate("ba0000&");
    _lm = Translate("lm0&");
    _zo = Translate("zo005&");
    _ll = Translate("ll1&");
    _lv = Translate("lv1&");
    _de = Translate("de0010&");
    _mv = Translate("mv00000&");
    _mc = Translate("mc00&");
    _mp = Translate("mp000&");
    _ms = Translate("ms0010&");
    _wt = Translate("wt00&");
    _gi = Translate("gi000&");
    _gj = Translate("gj0");
    _gk = Translate("gk0");
    _zu = Translate("zu");
    _dj = Translate("dj00");
    _zr = Translate("zr");
    _mh = Translate("mh0000&");
    _po = Translate("po0000");
    sub_str_LabID = SeqGetLabwareId(i_TargetSequence);
    {
      for(Loop_Channel_Counter = 0; Loop_Channel_Counter < gbl_int_1mLChannelsInstalled;)
      {
        Loop_Channel_Counter = Loop_Channel_Counter + 1;
        sub_int_PosRemaining = Positions_Remaining(i_TargetSequence);
        if (sub_int_PosRemaining > 0)
        {
          sub_str_PosID = SeqGetPositionId(i_TargetSequence);
          DevGetLabwarePositionEx(ML_STAR, sub_str_LabID, sub_str_PosID, flt_NotUsed, flt_NotUsed, flt_ZBottom, flt_NotUsed);
          flt_DispenseHeight = flt_ZBottom + i_flt_DispenseHeight;
          sub_ARR_Position.SetSize(0);
          ML_STAR.GetLabwarePosition(sub_str_LabID, sub_ARR_Position, sub_str_PosID);
          fLabX = sub_ARR_Position[0];
          fLabY = sub_ARR_Position[1];
          fLabX = xTenTurnToString(fLabX, 5);
          fLabY = xTenTurnToString(fLabY, 4);
          _te = xTenTurnToString(flt_DispenseHeight, 4);
          _te = Translate("te") + _te;
          flt_DispenseHeight = xTenTurnToString(flt_DispenseHeight, 4);
          flt_ZBottom = xTenTurnToString(flt_ZBottom, 4);
          flt_DS = xTenTurnToString(i_flt_DispenseSpeed, 4);
          if (Loop_Channel_Counter == 1)
          {
            _dm = _dm + "1";
            _tm = _tm + "1";
            _xp = _xp + fLabX;
            _yp = _yp + fLabY;
            _zx = _zx + flt_ZBottom;
            _lp = _lp + "2321";
            _zl = _zl + flt_DispenseHeight;
            _dv = _dv + "02740";
            _ds = _ds + flt_DS;
            _ta = _ta + "050";
            _zu = _zu + "0032";
            _zr = _zr + "06180";
          }
          else
          {
            _dm = _dm + " 1";
            _tm = _tm + " 1";
            _xp = _xp + " " + fLabX;
            _yp = _yp + " " + fLabY;
            _zx = _zx + " " + flt_ZBottom;
            _lp = _lp + " 2321";
            _zl = _zl + " " + flt_DispenseHeight;
            _dv = _dv + " 02740";
            _ds = _ds + " " + flt_DS;
            _ta = _ta + " 050";
            _zu = _zu + " 0032";
            _zr = _zr + " 06180";
          }
          SeqIncrement(i_TargetSequence, 1);
        }
        else
        {
          _dm = _dm + " 0";
          _tm = _tm + " 0";
          _xp = _xp + " 00000";
          _yp = _yp + " 0000";
          _zx = _zx + " 0000";
          _lp = _lp + " 2450";
          _zl = _zl + " 2450";
          _dv = _dv + " 00000";
          _ds = _ds + " 2000";
          _ta = _ta + " 000";
          _zu = _zu + " 0000";
          _zr = _zr + " 00000";
        }
      }
    }
    sub_str_FWParam = _dm + _tm + _xp + _yp + _zx + _lp + _zl + _ip + _it + _fp + _th + _te + _dv + _ds + _ss + _rv + _ta +
    _ba + _lm + _zo + _ll + _lv + _de + _mv + _mc + _mp + _ms + _wt + _gi + _gj + _gk + _zu + _dj + _zr + _mh +
    _po;
    Trace ("DS FW Parameter: ",sub_str_FWParam);
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    Trace (strFunctionName," Complete");
  }

  function DispenseChannelsOverSequence_3( device & ML_STAR, sequence i_TargetSequence, variable i_flt_DispenseHeight, variable i_flt_DispenseSpeed, variable i_flt_DispenseVolume ) void {
    private variable flt_DS;
    private variable _mc;
    private variable _ip;
    private variable sub_str_LabID;
    private variable _yp;
    private variable flt_NotUsed;
    private variable _mv;
    private variable _xp;
    private variable _dm;
    private variable _zr;
    private variable sub_int_PosRemaining;
    private variable sub_str_FWParam;
    private variable _tm;
    private variable _lv;
    private variable _fp;
    private variable flt_ZBottom;
    private variable _it;
    private variable strFunctionName;
    private variable _mh;
    private variable Loop_Channel_Counter;
    private variable _zu;
    private variable _wt;
    private variable sub_str_PosID;
    private variable _ds;
    private variable _ta;
    private variable _zx;
    private variable sub_str_ZHeightAfterDisp;
    private variable _ba;
    private variable _po;
    private variable _ss;
    private variable _ll;
    private variable _dv;
    private variable _lm;
    private variable _de;
    private variable fLabX;
    private variable _gi;
    private variable fLabY;
    private variable _te;
    private variable _zl;
    private variable _mp;
    private variable _gj;
    private variable _lp;
    private variable _gk;
    private variable _rv;
    private variable _th;
    private variable flt_DispenseHeight;
    private variable _zo;
    private variable _dj;
    private variable _ms;
    private variable sub_ARR_Position[];
    private variable flt_DV;
    strFunctionName = Translate("");
    strFunctionName = GetFunctionName();
    Trace ("Current Function: ",strFunctionName);
    sub_str_FWParam = Translate("");
    sub_str_ZHeightAfterDisp = Translate("1921");
    fLabX = 0;
    fLabY = 0;
    _dm = Translate("dm");
    _tm = Translate("tm");
    _xp = Translate("xp");
    _yp = Translate("yp");
    _zx = Translate("zx");
    _lp = Translate("lp");
    _zl = Translate("zl");
    _ip = Translate("ip0000&");
    _it = Translate("it0&");
    _fp = Translate("fp0000&");
    _th = Translate("th2371");
    _te = Translate("te") + sub_str_ZHeightAfterDisp;
    _dv = Translate("dv");
    _ds = Translate("ds");
    _ss = Translate("ss2500&");
    _rv = Translate("rv000&");
    _ta = Translate("ta");
    _ba = Translate("ba0000&");
    _lm = Translate("lm0&");
    _zo = Translate("zo005&");
    _ll = Translate("ll1&");
    _lv = Translate("lv1&");
    _de = Translate("de0010&");
    _mv = Translate("mv00000&");
    _mc = Translate("mc00&");
    _mp = Translate("mp000&");
    _ms = Translate("ms0010&");
    _wt = Translate("wt00&");
    _gi = Translate("gi000&");
    _gj = Translate("gj0");
    _gk = Translate("gk0");
    _zu = Translate("zu");
    _dj = Translate("dj00");
    _zr = Translate("zr");
    _mh = Translate("mh0000&");
    _po = Translate("po0000");
    sub_str_LabID = SeqGetLabwareId(i_TargetSequence);
    {
      for(Loop_Channel_Counter = 0; Loop_Channel_Counter < gbl_int_1mLChannelsInstalled;)
      {
        Loop_Channel_Counter = Loop_Channel_Counter + 1;
        sub_int_PosRemaining = Positions_Remaining(i_TargetSequence);
        if (sub_int_PosRemaining > 0)
        {
          sub_str_PosID = SeqGetPositionId(i_TargetSequence);
          DevGetLabwarePositionEx(ML_STAR, sub_str_LabID, sub_str_PosID, flt_NotUsed, flt_NotUsed, flt_ZBottom, flt_NotUsed);
          flt_DispenseHeight = flt_ZBottom + i_flt_DispenseHeight;
          sub_ARR_Position.SetSize(0);
          ML_STAR.GetLabwarePosition(sub_str_LabID, sub_ARR_Position, sub_str_PosID);
          fLabX = sub_ARR_Position[0];
          fLabY = sub_ARR_Position[1];
          fLabX = xTenTurnToString(fLabX, 5);
          fLabY = xTenTurnToString(fLabY, 4);
          _te = xTenTurnToString(flt_DispenseHeight, 4);
          _te = Translate("te") + _te;
          flt_DispenseHeight = xTenTurnToString(flt_DispenseHeight, 4);
          flt_ZBottom = xTenTurnToString(flt_ZBottom, 4);
          flt_DS = xTenTurnToString(i_flt_DispenseSpeed, 4);
          flt_DV = xTenTurnToString(i_flt_DispenseVolume, 5);
          if (Loop_Channel_Counter == 1)
          {
            _dm = _dm + "1";
            _tm = _tm + "1";
            _xp = _xp + fLabX;
            _yp = _yp + fLabY;
            _zx = _zx + flt_ZBottom;
            _lp = _lp + "2321";
            _zl = _zl + flt_DispenseHeight;
            _dv = _dv + flt_DV;
            _ds = _ds + flt_DS;
            _ta = _ta + "050";
            _zu = _zu + "0032";
            _zr = _zr + "06180";
          }
          else
          {
            _dm = _dm + " 1";
            _tm = _tm + " 1";
            _xp = _xp + " " + fLabX;
            _yp = _yp + " " + fLabY;
            _zx = _zx + " " + flt_ZBottom;
            _lp = _lp + " 2321";
            _zl = _zl + " " + flt_DispenseHeight;
            _dv = _dv + " " + flt_DV;
            _ds = _ds + " " + flt_DS;
            _ta = _ta + " 050";
            _zu = _zu + " 0032";
            _zr = _zr + " 06180";
          }
          SeqIncrement(i_TargetSequence, 1);
        }
        else
        {
          _dm = _dm + " 0";
          _tm = _tm + " 0";
          _xp = _xp + " 00000";
          _yp = _yp + " 0000";
          _zx = _zx + " 0000";
          _lp = _lp + " 2450";
          _zl = _zl + " 2450";
          _dv = _dv + " 00000";
          _ds = _ds + " 2000";
          _ta = _ta + " 000";
          _zu = _zu + " 0000";
          _zr = _zr + " 00000";
        }
      }
    }
    sub_str_FWParam = _dm + _tm + _xp + _yp + _zx + _lp + _zl + _ip + _it + _fp + _th + _te + _dv + _ds + _ss + _rv + _ta +
    _ba + _lm + _zo + _ll + _lv + _de + _mv + _mc + _mp + _ms + _wt + _gi + _gj + _gk + _zu + _dj + _zr + _mh +
    _po;
    Trace ("DS FW Parameter: ",sub_str_FWParam);
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    Trace (strFunctionName," Complete");
  }
} // library namespace
