#pragma once
#include "HSLStrLib.hsl"
#include "HSLTrcLib.hsl"
#include "HSLMthLib.hsl"
#include "HSLDevLib.hsl"
#include "HSLSeqLib.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace DPXPRECUTTEDTIPSLIB {
  private function CheckForOrginalLengthMinusNewLengthGreater15mm( device & iML_STAR, variable iOrginalLength, variable iNewLength, variable iTipType, variable iNewVolumen ) variable ;
  function ResetCuttedTipLenght( device & ML_STAR, variable iTipType ) void ;
  function SetCuttedTipLenght( device & ML_STAR, variable iTipType, variable iNewLength, variable & oTipVolume ) variable ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function ResetCuttedTipLenght( device & ML_STAR, variable iTipType ) void {
    private variable Original_Parameter;
    private variable Original_Command;
    Original_Command = Translate("C0TT");
    if (iTipType == 0)
    {
      Original_Parameter = Translate("tt00tf0tl0520tv04000tg2tu0");
    }
    if (iTipType == 1)
    {
      Original_Parameter = Translate("tt01tf1tl0520tv03600tg2tu0");
    }
    if (iTipType == 4)
    {
      Original_Parameter = Translate("tt04tf0tl0871tv12500tg3tu0");
    }
    if (iTipType == 5)
    {
      Original_Parameter = Translate("tt05tf1tl0871tv10650tg3tu0");
    }
    if (iTipType == 22)
    {
      Original_Parameter = Translate("tt22tf0tl0425tv00650tg2tu0");
    }
    if (iTipType == 23)
    {
      Original_Parameter = Translate("tt23tf1tl0425tv00600tg2tu0");
    }
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    if(0){
      TrcTrace(Translate("---------- Tip type parameters resetted to "), Original_Parameter);
    }
  }

  function SetCuttedTipLenght( device & ML_STAR, variable iTipType, variable iNewLength, variable & oTipVolume ) variable {
    private variable VolumeOfCuttedEnd;
    private variable tv_new;
    private variable TipTypeToOverwrite;
    private variable tt;
    private variable tu;
    private variable BaseAreaOnCuttingHeight;
    private variable VolumeOfCuttedEndInTenthMicroliters;
    private variable tv;
    private variable diameterOnCuttingHeight;
    private variable Original_Parameter;
    private variable tf;
    private variable tg;
    private variable tipConstantYShift;
    private variable TipTypParameter;
    private variable TipConst_DeltaPerMillimeter;
    private variable iTipTypeString;
    private variable tl_new;
    private variable TipConst_StartValue;
    private variable safetyVolumeToRemove;
    private variable tl;
    private variable lengthToCutInTenthMillimeters;
    private variable safetyVolumeToRemoveInTenthMicroliters;
    private variable iTipTypeLength;
    private variable NewLlengthInTenthMillimeters;
    private variable CutingLength;
    private variable tmp_ReturnValue;
    private variable tv_newString;
    private variable tmpTipVolDifference;
    private variable tip_NominalVolume;
    oTipVolume = 0;
    if(0){
      TrcTrace("---------- Start of SetFirmwarePropertysOfPreCuttedTips--------------------------------------------", "");
    }
    oTipVolume = 0.0;
    if (iTipType == 0)
    {
      Original_Parameter = Translate("tt00tf0tl0520tv04000tg2tu0");
    }
    if (iTipType == 1)
    {
      Original_Parameter = Translate("tt01tf1tl0520tv03600tg2tu0");
    }
    if (iTipType == 4)
    {
      Original_Parameter = Translate("tt04tf0tl0871tv12500tg3tu0");
    }
    if (iTipType == 5)
    {
      Original_Parameter = Translate("tt05tf1tl0871tv10650tg3tu0");
    }
    if (iTipType == 22)
    {
      Original_Parameter = Translate("tt22tf0tl0425tv00650tg2tu0");
    }
    if (iTipType == 23)
    {
      Original_Parameter = Translate("tt23tf1tl0425tv00600tg2tu0");
    }
    safetyVolumeToRemove = 20;
    safetyVolumeToRemoveInTenthMicroliters = safetyVolumeToRemove * 10;
    iTipTypeString = StrIStr(iTipType);
    iTipTypeLength = StrGetLength(iTipTypeString);
    if (iTipTypeLength < 2)
    {
      iTipTypeString = StrConcat2(Translate("0"), iTipType);
    }
    TipTypeToOverwrite = iTipTypeString;
    NewLlengthInTenthMillimeters = iNewLength * 10.0;
    NewLlengthInTenthMillimeters = NewLlengthInTenthMillimeters - 80.0;
    if (iTipType == 0)
    {
      tip_NominalVolume = 3000.0;
      tipConstantYShift = 0.078;
      MECC::TraceComment(Translate("---------- TipType Standard Tip, no filter"));
      tt = TipTypeToOverwrite;
      tf = 0;
      tl = 520;
      CutingLength = tl - NewLlengthInTenthMillimeters;
      CutingLength = CutingLength / 10;
      lengthToCutInTenthMillimeters = CutingLength * 10;
      tl_new = tl - lengthToCutInTenthMillimeters;
      tl_new = MthRound(tl_new, 0);
      tl_new = StrIStr(tl_new);
      tl_new = StrFillLeft(tl_new, Translate("0"), 4);
      tv = 4000;
      tg = 2;
      tu = 0;
      TipConst_DeltaPerMillimeter = 0.142;
      TipConst_StartValue = 0.358;
      diameterOnCuttingHeight = TipConst_DeltaPerMillimeter * CutingLength;
      diameterOnCuttingHeight = diameterOnCuttingHeight + TipConst_StartValue;
      BaseAreaOnCuttingHeight = diameterOnCuttingHeight * diameterOnCuttingHeight;
      BaseAreaOnCuttingHeight = BaseAreaOnCuttingHeight * 0.7854;
      VolumeOfCuttedEnd = BaseAreaOnCuttingHeight * CutingLength;
      VolumeOfCuttedEnd = VolumeOfCuttedEnd / 3;
      VolumeOfCuttedEnd = MthRound(VolumeOfCuttedEnd, 0);
      VolumeOfCuttedEndInTenthMicroliters = VolumeOfCuttedEnd * 10;
      tv_new = tv - VolumeOfCuttedEndInTenthMicroliters;
      tv_new = tv_new - safetyVolumeToRemoveInTenthMicroliters;
      tv_new = MthRound(tv_new, 0);
      tv_newString = StrIStr(tv_new);
      tv_newString = StrFillLeft(tv_newString, Translate("0"), 5);
    }
    if (iTipType == 1)
    {
      tip_NominalVolume = 3000.0;
      tipConstantYShift = 0.078;
      MECC::TraceComment(Translate("---------- TipType Standard Tip with filter"));
      tt = TipTypeToOverwrite;
      tf = 1;
      tl = 520;
      CutingLength = tl - NewLlengthInTenthMillimeters;
      CutingLength = CutingLength / 10;
      lengthToCutInTenthMillimeters = CutingLength * 10;
      tl_new = tl - lengthToCutInTenthMillimeters;
      tl_new = MthRound(tl_new, 0);
      tl_new = StrIStr(tl_new);
      tl_new = StrFillLeft(tl_new, Translate("0"), 4);
      tv = 3000;
      tg = 2;
      tu = 0;
      TipConst_DeltaPerMillimeter = 0.142;
      TipConst_StartValue = 0.358;
      diameterOnCuttingHeight = TipConst_DeltaPerMillimeter * CutingLength;
      diameterOnCuttingHeight = diameterOnCuttingHeight + TipConst_StartValue;
      BaseAreaOnCuttingHeight = diameterOnCuttingHeight * diameterOnCuttingHeight;
      BaseAreaOnCuttingHeight = BaseAreaOnCuttingHeight * 0.7854;
      VolumeOfCuttedEnd = BaseAreaOnCuttingHeight * CutingLength;
      VolumeOfCuttedEnd = VolumeOfCuttedEnd / 3;
      VolumeOfCuttedEnd = MthRound(VolumeOfCuttedEnd, 0);
      VolumeOfCuttedEndInTenthMicroliters = VolumeOfCuttedEnd * 10;
      tv_new = tv - VolumeOfCuttedEndInTenthMicroliters;
      tv_new = tv_new - safetyVolumeToRemoveInTenthMicroliters;
      tv_new = MthRound(tv_new, 0);
      tv_newString = StrIStr(tv_new);
      tv_newString = StrFillLeft(tv_newString, Translate("0"), 5);
    }
    if (iTipType == 4)
    {
      tip_NominalVolume = 10000.0;
      tipConstantYShift = 0.107;
      MECC::TraceComment(Translate("---------- TipType High Volume Tip, no filter"));
      tt = TipTypeToOverwrite;
      tf = 0;
      tl = 871;
      CutingLength = tl - NewLlengthInTenthMillimeters;
      CutingLength = CutingLength / 10;
      lengthToCutInTenthMillimeters = CutingLength * 10;
      tl_new = tl - lengthToCutInTenthMillimeters;
      tl_new = MthRound(tl_new, 0);
      tl_new = StrIStr(tl_new);
      tl_new = StrFillLeft(tl_new, Translate("0"), 4);
      tv = 12500;
      tg = 3;
      tu = 0;
      TipConst_DeltaPerMillimeter = 0.171;
      TipConst_StartValue = 0.632;
      diameterOnCuttingHeight = TipConst_DeltaPerMillimeter * CutingLength;
      diameterOnCuttingHeight = diameterOnCuttingHeight + TipConst_StartValue;
      BaseAreaOnCuttingHeight = diameterOnCuttingHeight * diameterOnCuttingHeight;
      BaseAreaOnCuttingHeight = BaseAreaOnCuttingHeight * 0.7854;
      VolumeOfCuttedEnd = BaseAreaOnCuttingHeight * CutingLength;
      VolumeOfCuttedEnd = VolumeOfCuttedEnd / 3;
      VolumeOfCuttedEnd = MthRound(VolumeOfCuttedEnd, 0);
      VolumeOfCuttedEndInTenthMicroliters = VolumeOfCuttedEnd * 10;
      tv_new = tv - VolumeOfCuttedEndInTenthMicroliters;
      tv_new = tv_new - safetyVolumeToRemoveInTenthMicroliters;
      tv_new = MthRound(tv_new, 0);
      tv_newString = StrIStr(tv_new);
      tv_newString = StrFillLeft(tv_newString, Translate("0"), 5);
    }
    if (iTipType == 5)
    {
      tip_NominalVolume = 10000.0;
      tipConstantYShift = 0.107;
      MECC::TraceComment(Translate("---------- TipType High Volume Tip with filter"));
      tt = TipTypeToOverwrite;
      tf = 1;
      tl = 871;
      CutingLength = tl - NewLlengthInTenthMillimeters;
      CutingLength = CutingLength / 10;
      lengthToCutInTenthMillimeters = CutingLength * 10;
      tl_new = tl - lengthToCutInTenthMillimeters;
      tl_new = MthRound(tl_new, 0);
      tl_new = StrIStr(tl_new);
      tl_new = StrFillLeft(tl_new, Translate("0"), 4);
      tv = 10650;
      tg = 3;
      tu = 0;
      TipConst_DeltaPerMillimeter = 0.171;
      TipConst_StartValue = 0.632;
      diameterOnCuttingHeight = TipConst_DeltaPerMillimeter * CutingLength;
      diameterOnCuttingHeight = diameterOnCuttingHeight + TipConst_StartValue;
      BaseAreaOnCuttingHeight = diameterOnCuttingHeight * diameterOnCuttingHeight;
      BaseAreaOnCuttingHeight = BaseAreaOnCuttingHeight * 0.7854;
      VolumeOfCuttedEnd = BaseAreaOnCuttingHeight * CutingLength;
      VolumeOfCuttedEnd = VolumeOfCuttedEnd / 3;
      VolumeOfCuttedEnd = MthRound(VolumeOfCuttedEnd, 0);
      VolumeOfCuttedEndInTenthMicroliters = VolumeOfCuttedEnd * 10;
      tv_new = tv - VolumeOfCuttedEndInTenthMicroliters;
      tv_new = tv_new - safetyVolumeToRemoveInTenthMicroliters;
      tv_new = MthRound(tv_new, 0);
      tv_newString = StrIStr(tv_new);
      tv_newString = StrFillLeft(tv_newString, Translate("0"), 5);
    }
    if (iTipType == 22)
    {
      tip_NominalVolume = 500.0;
      tipConstantYShift = 0.092;
      MECC::TraceComment(Translate("---------- TipType 50ul Tip, no filter"));
      tt = TipTypeToOverwrite;
      tf = 0;
      tl = 420;
      CutingLength = tl - NewLlengthInTenthMillimeters;
      CutingLength = CutingLength / 10;
      lengthToCutInTenthMillimeters = CutingLength * 10;
      tl_new = tl - lengthToCutInTenthMillimeters;
      tl_new = MthRound(tl_new, 0);
      tl_new = StrIStr(tl_new);
      tl_new = StrFillLeft(tl_new, Translate("0"), 4);
      tv = 650;
      tg = 2;
      tu = 0;
      TipConst_DeltaPerMillimeter = 0.122;
      TipConst_StartValue = 0.262;
      diameterOnCuttingHeight = TipConst_DeltaPerMillimeter * CutingLength;
      diameterOnCuttingHeight = diameterOnCuttingHeight + TipConst_StartValue;
      BaseAreaOnCuttingHeight = diameterOnCuttingHeight * diameterOnCuttingHeight;
      BaseAreaOnCuttingHeight = BaseAreaOnCuttingHeight * 0.7854;
      VolumeOfCuttedEnd = BaseAreaOnCuttingHeight * CutingLength;
      VolumeOfCuttedEnd = VolumeOfCuttedEnd / 3;
      VolumeOfCuttedEnd = MthRound(VolumeOfCuttedEnd, 0);
      VolumeOfCuttedEndInTenthMicroliters = VolumeOfCuttedEnd * 10;
      tv_new = tv - VolumeOfCuttedEndInTenthMicroliters;
      tv_new = tv_new - safetyVolumeToRemoveInTenthMicroliters;
      tv_new = MthRound(tv_new, 0);
      tv_newString = StrIStr(tv_new);
      tv_newString = StrFillLeft(tv_newString, Translate("0"), 5);
    }
    if (iTipType == 23)
    {
      tip_NominalVolume = 500.0;
      tipConstantYShift = 0.092;
      MECC::TraceComment(Translate("--------- TipType 50ul Tip with filter"));
      tt = TipTypeToOverwrite;
      tf = 1;
      tl = 420;
      CutingLength = tl - NewLlengthInTenthMillimeters;
      CutingLength = CutingLength / 10;
      lengthToCutInTenthMillimeters = CutingLength * 10;
      tl_new = tl - lengthToCutInTenthMillimeters;
      tl_new = MthRound(tl_new, 0);
      tl_new = StrIStr(tl_new);
      tl_new = StrFillLeft(tl_new, Translate("0"), 4);
      tv = 550;
      tg = 2;
      tu = 0;
      TipConst_DeltaPerMillimeter = 0.122;
      TipConst_StartValue = 0.262;
      diameterOnCuttingHeight = TipConst_DeltaPerMillimeter * CutingLength;
      diameterOnCuttingHeight = diameterOnCuttingHeight + TipConst_StartValue;
      BaseAreaOnCuttingHeight = diameterOnCuttingHeight * diameterOnCuttingHeight;
      BaseAreaOnCuttingHeight = BaseAreaOnCuttingHeight * 0.7854;
      VolumeOfCuttedEnd = BaseAreaOnCuttingHeight * CutingLength;
      VolumeOfCuttedEnd = VolumeOfCuttedEnd / 3;
      VolumeOfCuttedEnd = MthRound(VolumeOfCuttedEnd, 0);
      VolumeOfCuttedEndInTenthMicroliters = VolumeOfCuttedEnd * 10;
      tv_new = tv - VolumeOfCuttedEndInTenthMicroliters;
      tv_new = tv_new - safetyVolumeToRemoveInTenthMicroliters;
      tv_new = MthRound(tv_new, 0);
      tv_newString = StrIStr(tv_new);
      tv_newString = StrFillLeft(tv_newString, Translate("0"), 5);
    }
    tmpTipVolDifference = tv - tv_new;
    oTipVolume = tip_NominalVolume - tmpTipVolDifference;
    oTipVolume = oTipVolume / 10;
    if(0){
      tmp_ReturnValue = CheckForOrginalLengthMinusNewLengthGreater15mm(ML_STAR, tl, NewLlengthInTenthMillimeters, iTipType, oTipVolume);
      if (tmp_ReturnValue == ASWGLOBAL::BOOL::FALSE)
      {
        return (tmp_ReturnValue);
      }
    }
    TipTypParameter = StrConcat8(Translate("tt"), TipTypeToOverwrite, Translate("tf"), tf, Translate("tl"), tl_new, Translate("tv"), tv_newString);
    TipTypParameter = StrConcat8(TipTypParameter, Translate("tg"), tg, Translate("tu"), tu, Translate(""), Translate(""), Translate(""));
    if(0){
      TrcTrace(Translate("---------- Orig.TipTypParameter = "), Original_Parameter);
      TrcTrace(Translate("---------- New TipTypParameter = "), TipTypParameter);
    }
    Trace("SetCuttedTipLength Parameter = ", TipTypParameter);
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    if(0){
      TrcTrace(Translate("---------- End of PickUpAndCutTips"), Translate(""));
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }

  private function CheckForOrginalLengthMinusNewLengthGreater15mm( device & iML_STAR, variable iOrginalLength, variable iNewLength, variable iTipType, variable iNewVolumen ) variable {
    private variable tmpCutLength;
    private dialog dialogHandle_1;
    private dialog dialogHandle_2;
    private dialog dialogHandle_3;
    private variable tmp_TipTypeIsOK;
    private dialog dialogHandle_4;
    tmp_TipTypeIsOK = ASWGLOBAL::BOOL::FALSE;
    if (iTipType == 0)
    {
      tmp_TipTypeIsOK = ASWGLOBAL::BOOL::TRUE;
    }
    if (iTipType == 1)
    {
      tmp_TipTypeIsOK = ASWGLOBAL::BOOL::TRUE;
    }
    if (iTipType == 4)
    {
      tmp_TipTypeIsOK = ASWGLOBAL::BOOL::TRUE;
    }
    if (iTipType == 5)
    {
      tmp_TipTypeIsOK = ASWGLOBAL::BOOL::TRUE;
    }
    if (iTipType == 22)
    {
      tmp_TipTypeIsOK = ASWGLOBAL::BOOL::TRUE;
    }
    if (iTipType == 23)
    {
      tmp_TipTypeIsOK = ASWGLOBAL::BOOL::TRUE;
    }
    if (tmp_TipTypeIsOK == ASWGLOBAL::BOOL::FALSE)
    {
      dialogHandle_3.SetOutput(Translate("Wrong TipType"), Translate("\nAllowed is 0,1,4,5,22,23"), Translate("\nCurrentTiptype is "), iTipType);
      dialogHandle_3.ShowOutput(Translate("Wrong TipType"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
      return (ASWGLOBAL::BOOL::FALSE);
    }
    tmpCutLength = iOrginalLength - iNewLength;
    tmpCutLength = tmpCutLength / 10;
    dialogHandle_4.SetOutput(Translate("Verify TipParameter"), Translate("Maximum cutting length = 15mm\n"), Translate("CurrentCutlength="), tmpCutLength, Translate("\n\nOrginalLength="), iOrginalLength, Translate("mm\n\n"), Translate("NewLenght ="), iNewLength, Translate("mm\n\n"), Translate("TipType="), iTipType, Translate("\nNewVolumen="), iNewVolumen);
    dialogHandle_4.ShowOutput(Translate("Verify TipParameter"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
    if (tmpCutLength > 40)
    {
      dialogHandle_1.SetOutput(Translate("The cutting length is too long!\n\n"), Translate("Maximum cutting length = 15mm\n"), Translate("CurrentCutLength="), tmpCutLength, Translate("\n\nOrginalLength="), iOrginalLength, Translate("mm\n\n"), Translate("NewLenght ="), iNewLength, Translate("mm\n\n"), Translate("TipType="), iTipType);
      dialogHandle_1.ShowOutput(Translate("Cutting length too long"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
      return (ASWGLOBAL::BOOL::FALSE);
    }
    if (tmpCutLength < 0)
    {
      dialogHandle_2.SetOutput(Translate("The cutting length isnegative! Please consult your Hairdresser for Tip extension.;)\n\n"), Translate("Maximum cutting length = 15mm\n"), Translate("CurrentCutlength="), tmpCutLength, Translate("\n\nOrginalLength="), iOrginalLength, Translate("mm\n\n"), Translate("NewLenght ="), iNewLength, Translate("mm\n\n"), Translate("TipType="), iTipType);
      dialogHandle_2.ShowOutput(Translate("Cutting length too long"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
      return (ASWGLOBAL::BOOL::FALSE);
    }
    return (ASWGLOBAL::BOOL::TRUE);
  }
} // library namespace
