#pragma once
#include "HSLStrLib.hsl"
#include "HSLUtilLib.hsl"
#include "HSLMthLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace CHANNEL_QUERY_1ML {
  function Get_Channel_Position( device & ML_STAR, variable i_int_CurrentChannel, variable & o_X_Coord, variable & o_Y_Coord, variable & o_Z_Coord ) void ;
  function Get_Channel_Temp( device & ML_STAR, variable i_int_CurrentChannel, variable & o_flt_TempC ) void ;
  function Get_Tip_Present( device & ML_STAR, variable i_int_CurrentChannel, variable & o_bool_TipPresent ) void ;
  function Get_Tip_Volume( device & ML_STAR, variable i_int_CurrentChannel, variable & o_flt_MaxTipVolume, variable & o_flt_CurrentVolumeInTip ) void ;
  function InitializeDispenseDrive( device & ML_STAR, variable i_int_CurrentChannel ) void ;
  function RequestAspirationMonitoringMode( device & ML_STAR, variable & o_int_AspMonitorMode ) void ;
  function SetAspirationMonitoringMode( device & ML_STAR, variable i_int_AspMonitoringModeToSet ) void ;
  private function _GetChannelValue( variable i_int_ChannelNumber, variable & o_str_ChannelValue ) void ;
  private function _Parse_Parameter_Multiple( variable i_str_ParameterFull, variable i_str_Parameter, variable i_flt_Conversion, variable i_int_TotalDigits, variable i_int_MaxValues, variable & o_bol_ParameterFound, variable & o_arr_flt_Value[] ) void ;
  private function _Parse_Parameter_Single( variable i_str_ParameterFull, variable i_str_Parameter, variable i_flt_Conversion, variable i_int_TotalDigits, variable & o_bol_ParameterFound, variable & o_flt_Value ) void ;
  private function _RemoveExcessDigits( variable & io_flt_Value ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  private function _Parse_Parameter_Single( variable i_str_ParameterFull, variable i_str_Parameter, variable i_flt_Conversion, variable i_int_TotalDigits, variable & o_bol_ParameterFound, variable & o_flt_Value ) void {
    private variable str_Value3;
    private variable int_Remaining;
    private variable str_RegionOfInterest;
    private variable int_ValueNumber;
    private variable int_LoopCount;
    private variable flt_Value2;
    private variable int_StringPosition;
    private variable int_ParamaterLength;
    private variable int_SecondCut;
    private variable int_Count;
    private variable int_Value2;
    private variable str_Value2;
    private variable str_Value;
    o_bol_ParameterFound = 0;
    o_flt_Value = 0;
    o_flt_Value = 0.0;
    o_bol_ParameterFound = StrReplace(i_str_ParameterFull, i_str_Parameter, i_str_Parameter);
    StrReplace(i_str_ParameterFull, Translate("+"), Translate(""));
    int_ParamaterLength = StrGetLength(i_str_ParameterFull);
    if (o_bol_ParameterFound == 1)
    {
      int_StringPosition = StrFind(i_str_ParameterFull, i_str_Parameter);
      int_StringPosition = int_StringPosition + 1;
      int_Remaining = int_ParamaterLength - int_StringPosition;
      str_RegionOfInterest = StrMid(i_str_ParameterFull, int_StringPosition, int_Remaining);
      int_ValueNumber = i_int_TotalDigits + 1;
      int_SecondCut = i_int_TotalDigits;
      int_Count = 1;
      {
        int_LoopCount = 0;
        while (1 == 1)
        {
          int_LoopCount = int_LoopCount + 1;
          str_Value = StrMid(str_RegionOfInterest, int_Count, int_ValueNumber);
          int_Count = int_Count + int_ValueNumber;
          str_Value2 = StrLeft(str_Value, int_SecondCut);
          int_Value2 = StrIVal(str_Value2);
          flt_Value2 = int_Value2 * i_flt_Conversion;
          o_flt_Value = flt_Value2;
          str_Value3 = StrRight(str_Value, 1);
          if (str_Value3 != " ")
          {
            break;
          }
        }
      }
    }
  }

  function Get_Channel_Temp( device & ML_STAR, variable i_int_CurrentChannel, variable & o_flt_TempC ) void {
    private variable flt_Resolution;
    private variable str_ReturnValue;
    private variable bol_ParameterFound;
    private variable flt_Value;
    private variable str_Firmware;
    o_flt_TempC = 0;
    _GetChannelValue(i_int_CurrentChannel, i_int_CurrentChannel);
    o_flt_TempC = 0.0;
    flt_Resolution = 0.01;
    str_Firmware = StrConcat4(Translate("P"), i_int_CurrentChannel, Translate("RM"), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    _Parse_Parameter_Single(str_ReturnValue, Translate("rm"), flt_Resolution, 4, bol_ParameterFound, flt_Value);
    if (bol_ParameterFound == 1)
    {
      o_flt_TempC = flt_Value;
    }
    Trace("     ","Channel Number:  ",i_int_CurrentChannel);
    Trace("    ","Measured temperature:  ",o_flt_TempC," C");
  }

  function Get_Channel_Position( device & ML_STAR, variable i_int_CurrentChannel, variable & o_X_Coord, variable & o_Y_Coord, variable & o_Z_Coord ) void {
    private variable str_ReturnValue;
    private variable bol_ParameterFound;
    private variable str_FirmwarePARAM;
    private variable str_FirmwareCMND;
    private variable flt_Resolution_X;
    private variable flt_Resolution_Y;
    private variable flt_Resolution_Z;
    private variable str_CurrentChannel;
    private variable flt_ReturnValue;
    o_X_Coord = 0;
    o_Y_Coord = 0;
    o_Z_Coord = 0;
    _GetChannelValue(i_int_CurrentChannel, i_int_CurrentChannel);
    flt_Resolution_Z = 0.1;
    flt_Resolution_Y = 0.1;
    flt_Resolution_X = 0.1;
    str_FirmwareCMND = StrConcat4(Translate("C0RD"), Translate(""), Translate(""), Translate(""));
    str_CurrentChannel = StrConcat2(i_int_CurrentChannel, Translate(""));
    str_CurrentChannel = StrFillLeft(str_CurrentChannel, Translate("0"), 2);
    str_FirmwarePARAM = StrConcat4(Translate("pn"), str_CurrentChannel, Translate(""), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    _Parse_Parameter_Single(str_ReturnValue, Translate("rd"), flt_Resolution_Z, 4, bol_ParameterFound, flt_ReturnValue);
    if (bol_ParameterFound == 1)
    {
      o_Z_Coord = flt_ReturnValue;
    }
    str_FirmwareCMND = StrConcat4(Translate("C0RB"), Translate(""), Translate(""), Translate(""));
    str_CurrentChannel = StrConcat2(i_int_CurrentChannel, Translate(""));
    str_CurrentChannel = StrFillLeft(str_CurrentChannel, Translate("0"), 2);
    str_FirmwarePARAM = StrConcat4(Translate("pn"), str_CurrentChannel, Translate(""), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    _Parse_Parameter_Single(str_ReturnValue, Translate("rb"), flt_Resolution_Y, 4, bol_ParameterFound, flt_ReturnValue);
    if (bol_ParameterFound == 1)
    {
      o_Y_Coord = flt_ReturnValue;
    }
    str_FirmwareCMND = StrConcat4(Translate("C0"), Translate(""), Translate("RX"), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    _Parse_Parameter_Single(str_ReturnValue, Translate("rx"), flt_Resolution_X, 5, bol_ParameterFound, flt_ReturnValue);
    if (bol_ParameterFound == 1)
    {
      o_X_Coord = flt_ReturnValue;
    }
    Trace("     ","Channel Number:  ",i_int_CurrentChannel);
    Trace("   Current X Position:  ",o_X_Coord);
    Trace("   Current Y Position:  ",o_Y_Coord);
    Trace("   Current Z Position:  ",o_Z_Coord);
  }

  function Get_Tip_Present( device & ML_STAR, variable i_int_CurrentChannel, variable & o_bool_TipPresent ) void {
    private variable str_ReturnValue;
    private variable bol_ParameterFound;
    private variable flt_Resolution;
    private variable flt_Value;
    private variable str_Firmware;
    o_bool_TipPresent = 0;
    _GetChannelValue(i_int_CurrentChannel, i_int_CurrentChannel);
    o_bool_TipPresent = 0;
    flt_Resolution = 1;
    str_Firmware = StrConcat4(Translate("P"), i_int_CurrentChannel, Translate("RT"), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    _Parse_Parameter_Single(str_ReturnValue, Translate("rt"), flt_Resolution, 1, bol_ParameterFound, flt_Value);
    if (bol_ParameterFound == 1)
    {
      if (flt_Value == 1.0)
      {
        o_bool_TipPresent = 1;
      }
      else
      {
        o_bool_TipPresent = 0;
      }
    }
    Trace("     ","Channel Number:  ",i_int_CurrentChannel);
    Trace("     ","Tip Present:  ",o_bool_TipPresent);
  }

  function Get_Tip_Volume( device & ML_STAR, variable i_int_CurrentChannel, variable & o_flt_MaxTipVolume, variable & o_flt_CurrentVolumeInTip ) void {
    private variable str_ReturnValue;
    private variable bol_ParameterFound;
    private variable flt_Resolution;
    private variable str_Firmware;
    private variable int_TotalFound;
    private variable arr_Values[];
    o_flt_MaxTipVolume = 0;
    o_flt_CurrentVolumeInTip = 0;
    _GetChannelValue(i_int_CurrentChannel, i_int_CurrentChannel);
    o_flt_MaxTipVolume = 0.0;
    o_flt_CurrentVolumeInTip = 0.0;
    flt_Resolution = 0.046876;
    str_Firmware = StrConcat4(Translate("P"), i_int_CurrentChannel, Translate("QC"), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    _Parse_Parameter_Multiple(str_ReturnValue, Translate("qc"), flt_Resolution, 5, 2, bol_ParameterFound, arr_Values);
    int_TotalFound=arr_Values.GetSize();
    if (int_TotalFound >= 1)
    {
      if (bol_ParameterFound == 1)
      {
        o_flt_MaxTipVolume = arr_Values.ElementAt( 1 -1);
        _RemoveExcessDigits(o_flt_MaxTipVolume);
      }
    }
    if (int_TotalFound >= 2)
    {
      if (bol_ParameterFound == 1)
      {
        o_flt_CurrentVolumeInTip = arr_Values.ElementAt( 2 -1);
        _RemoveExcessDigits(o_flt_CurrentVolumeInTip);
      }
    }
    Trace("     ","Channel Number:  ",i_int_CurrentChannel);
    Trace("     ","Max tip volume:  ",o_flt_MaxTipVolume," uL");
    Trace("     ","Current tip volume:  ",o_flt_CurrentVolumeInTip," uL");
  }

  private function _Parse_Parameter_Multiple( variable i_str_ParameterFull, variable i_str_Parameter, variable i_flt_Conversion, variable i_int_TotalDigits, variable i_int_MaxValues, variable & o_bol_ParameterFound, variable & o_arr_flt_Value[] ) void {
    private variable str_Value3;
    private variable int_Remaining;
    private variable str_RegionOfInterest;
    private variable int_ValueNumber;
    private variable int_LoopCount;
    private variable int_StringPosition;
    private variable flt_Value2;
    private variable int_ParamaterLength;
    private variable int_ChannelCount;
    private variable o_flt_Value;
    private variable int_SecondCut;
    private variable int_Count;
    private variable int_Value2;
    private variable str_Value2;
    private variable str_Value;
    o_bol_ParameterFound = 0;
    o_arr_flt_Value.SetSize( 0);
    o_arr_flt_Value.SetSize(0);
    o_bol_ParameterFound = StrReplace(i_str_ParameterFull, i_str_Parameter, i_str_Parameter);
    int_ParamaterLength = StrGetLength(i_str_ParameterFull);
    if (o_bol_ParameterFound == 1)
    {
      int_StringPosition = StrFind(i_str_ParameterFull, i_str_Parameter);
      int_StringPosition = int_StringPosition + 1;
      int_Remaining = int_ParamaterLength - int_StringPosition;
      str_RegionOfInterest = StrMid(i_str_ParameterFull, int_StringPosition, int_Remaining);
      int_ValueNumber = i_int_TotalDigits + 1;
      int_SecondCut = i_int_TotalDigits;
      int_Count = 1;
      {
        int_LoopCount = 0;
        while (1 == 1)
        {
          int_LoopCount = int_LoopCount + 1;
          int_ChannelCount = int_ChannelCount + 1;
          str_Value = StrMid(str_RegionOfInterest, int_Count, int_ValueNumber);
          int_Count = int_Count + int_ValueNumber;
          str_Value2 = StrLeft(str_Value, int_SecondCut);
          int_Value2 = StrIVal(str_Value2);
          flt_Value2 = int_Value2 * i_flt_Conversion;
          o_flt_Value = flt_Value2;
          o_arr_flt_Value.AddAsLast(o_flt_Value);
          str_Value3 = StrRight(str_Value, 1);
          if (str_Value3 != " ")
          {
            if (str_Value3 == "&")
            {
              {
                while (int_ChannelCount < i_int_MaxValues)
                {
                  int_ChannelCount = int_ChannelCount + 1;
                  o_arr_flt_Value.AddAsLast(o_flt_Value);
                }
              }
            }
            break;
          }
        }
      }
    }
  }

  private function _RemoveExcessDigits( variable & io_flt_Value ) void {
    private variable int_Check;
    io_flt_Value = MthRound(io_flt_Value, 1);
    io_flt_Value = StrConcat2(io_flt_Value, Translate(""));
    io_flt_Value = StrTrimRight(io_flt_Value, Translate("0"));
    int_Check = StrRight(io_flt_Value, 1);
    if (int_Check == ".")
    {
      StrReplace(io_flt_Value, Translate("."), Translate(".0"));
    }
    io_flt_Value = StrFVal(io_flt_Value);
  }

  function RequestAspirationMonitoringMode( device & ML_STAR, variable & o_int_AspMonitorMode ) void {
    private variable str_ReturnValue;
    private variable bol_ParameterFound;
    private variable flt_Resolution;
    private variable flt_Value;
    private variable str_Firmware;
    o_int_AspMonitorMode = 0;
    o_int_AspMonitorMode = -1;
    flt_Resolution = 1;
    str_Firmware = StrConcat4(Translate("P"), Translate("X"), Translate("QF"), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
    _Parse_Parameter_Single(str_ReturnValue, Translate("qf"), flt_Resolution, 1, bol_ParameterFound, flt_Value);
    if (bol_ParameterFound == 1)
    {
      if (flt_Value == 1.0)
      {
        MECC::TraceComment(Translate("Aspiratin monitoring mode is set to TADM"));
        o_int_AspMonitorMode = 1;
      }
      else
      {
        MECC::TraceComment(Translate("Aspiratin monitoring mode is set to MAD"));
        o_int_AspMonitorMode = 0;
      }
    }
  }

  function SetAspirationMonitoringMode( device & ML_STAR, variable i_int_AspMonitoringModeToSet ) void {
    private variable str_ReturnValue;
    private variable flt_Resolution;
    private variable str_Firmware;
    private variable str_Param;
    flt_Resolution = 1;
    str_Firmware = StrConcat4(Translate("P"), Translate("X"), Translate("AF"), Translate(""));
    str_Param = StrConcat2(Translate("af"), i_int_AspMonitoringModeToSet);
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
  }

  private function _GetChannelValue( variable i_int_ChannelNumber, variable & o_str_ChannelValue ) void {
    o_str_ChannelValue = 0;
    o_str_ChannelValue = Translate("");
    if (i_int_ChannelNumber == 1)
    {
      o_str_ChannelValue = Translate("1");
    }
    if (i_int_ChannelNumber == 2)
    {
      o_str_ChannelValue = Translate("2");
    }
    if (i_int_ChannelNumber == 3)
    {
      o_str_ChannelValue = Translate("3");
    }
    if (i_int_ChannelNumber == 4)
    {
      o_str_ChannelValue = Translate("4");
    }
    if (i_int_ChannelNumber == 5)
    {
      o_str_ChannelValue = Translate("5");
    }
    if (i_int_ChannelNumber == 6)
    {
      o_str_ChannelValue = Translate("6");
    }
    if (i_int_ChannelNumber == 7)
    {
      o_str_ChannelValue = Translate("7");
    }
    if (i_int_ChannelNumber == 8)
    {
      o_str_ChannelValue = Translate("8");
    }
    if (i_int_ChannelNumber == 9)
    {
      o_str_ChannelValue = Translate("9");
    }
    if (i_int_ChannelNumber == 10)
    {
      o_str_ChannelValue = Translate("A");
    }
    if (i_int_ChannelNumber == 11)
    {
      o_str_ChannelValue = Translate("B");
    }
    if (i_int_ChannelNumber == 12)
    {
      o_str_ChannelValue = Translate("C");
    }
    if (i_int_ChannelNumber == 13)
    {
      o_str_ChannelValue = Translate("D");
    }
    if (i_int_ChannelNumber == 14)
    {
      o_str_ChannelValue = Translate("E");
    }
    if (i_int_ChannelNumber == 15)
    {
      o_str_ChannelValue = Translate("F");
    }
    if (i_int_ChannelNumber == 16)
    {
      o_str_ChannelValue = Translate("G");
    }
  }

  function InitializeDispenseDrive( device & ML_STAR, variable i_int_CurrentChannel ) void {
    private variable str_ReturnValue;
    private variable str_Firmware;
    _GetChannelValue(i_int_CurrentChannel, i_int_CurrentChannel);
    str_Firmware = StrConcat4(Translate("P"), i_int_CurrentChannel, Translate("DI"), Translate(""));
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValue = arrRetValues[3];
    }
  }
} // library namespace
