#pragma once
#include "HSLSeqLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLDevLib.hsl"
#include "HSLFilLib.hsl"
#include "HSLMappingReport.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace SEQUENCESORTING {
  private function Array_Find( variable search_value, variable & search_array[] ) variable ;
  function OneSeqOneVol_Channels( device & ML_STAR, sequence & sequence_for_sorting, variable & sort_array[], variable sort_distance, variable sort_mode ) void ;
  function OneSeq_Channels( device & ML_STAR, sequence & sequence_for_sorting, variable sort_distance, variable sort_mode ) void ;
  function TwoSeqOneVol_Channels( device & ML_STAR, sequence & sequence_for_sorting, sequence & secondary_seq, variable & sort_array[], variable sort_distance, variable sort_mode ) void ;
  function TwoSeq_Channels( device & ML_STAR, sequence & sequence_for_sorting, sequence & secondary_seq, variable sort_distance, variable sort_mode ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function OneSeq_Channels( device & ML_STAR, sequence & sequence_for_sorting, variable sort_distance, variable sort_mode ) void {
    private variable asp_angle;
    private variable sql_statement;
    private variable LogFilesPath;
    private variable asp_pos_id;
    private variable asp_labid;
    private variable loopCounter1;
    private variable array_size;
    private variable loopCounter2;
    private variable seq_sort_file;
    private variable asp_y_coord;
    private variable asp_x_coord;
    private variable asp_z_coord;
    private variable loopCounter5;
    private file seq_sort;
    private variable unique_labIDs[];
    private variable loopCounter7;
    private variable unique_xcoords[];
    private variable var_str;
    private variable Unique_y_coordinate;
    private variable deltaY;
    private variable LoopsNum;
    private variable var_value_found;
    private variable loopCounter3;
    private variable loopCounter4;
    private variable arr_valuesycoord[];
    private variable arr_valuesLabID[];
    private variable arr_valuesprocessed[];
    private variable arr_valuesPosID[];
    private variable var_array_found;
    sequence_for_sorting.SetCurrentPosition(1);
    LogFilesPath = FilGetLogFilesPath();
    seq_sort_file = StrConcat4(LogFilesPath, Translate("\\"), Translate("dummy.xls"), Translate(""));
    HSLMapReport::DeleteFile(seq_sort_file);
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (sequence_for_sorting.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, sequence_for_sorting, 1);
        loopCounter1 = loopCounter1 + 1;
        asp_labid = SeqGetLabwareId(sequence_for_sorting);
        asp_pos_id = SeqGetPositionId(sequence_for_sorting);
        DevGetLabwarePositionEx(ML_STAR, asp_labid, asp_pos_id, asp_x_coord, asp_y_coord, asp_z_coord, asp_angle);
        if( 0 == seq_sort.WriteRecord() )
        {
              MECC::RaiseRuntimeError(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
        }
        SeqIncrement(sequence_for_sorting, 1);
        if (
           (sequence_for_sorting.GetCurrentPosition() > 0 && sequence_for_sorting.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      sequence_for_sorting.SetMax(sequence_for_sorting.GetTotal());
      sequence_for_sorting.SetCurrentPosition(1);
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeError(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    unique_labIDs.SetSize(0);
    if (sort_mode == 1)
    {
      seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
      if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, "select distinct [asp_lab_id] from [sheet1$]") )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
      }
      {
        loopCounter5 = 0;
        while (
           (seq_sort.Eof() == 0)
        )
        {
          loopCounter5 = loopCounter5 + 1;
          if( 0 == seq_sort.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          unique_labIDs.AddAsLast(asp_labid);
        }
      }
      if( 0 != seq_sort.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      seq_sort.RemoveFields();
    }
    else
    {
      seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
      seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
      seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
      seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
      seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
      seq_sort.AddField("asp_angle", asp_angle, hslFloat);
      if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, "select * from [sheet1$] order by [asp_x_coord] asc, [asp_y_coord] desc") )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
      }
      unique_labIDs.SetSize(0);
      {
        loopCounter5 = 0;
        while (
           (seq_sort.Eof() == 0)
        )
        {
          loopCounter5 = loopCounter5 + 1;
          if( 0 == seq_sort.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          var_array_found = Array_Find(asp_labid, unique_labIDs);
          if (var_array_found == ASWGLOBAL::BOOL::FALSE)
          {
            unique_labIDs.AddAsLast(asp_labid);
          }
        }
      }
      if( 0 != seq_sort.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      seq_sort.RemoveFields();
    }
    unique_xcoords.SetSize(0);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, "select distinct [asp_x_coord] from [sheet1$] order by [asp_x_coord] asc") )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    {
      loopCounter5 = 0;
      while (
         (seq_sort.Eof() == 0)
      )
      {
        loopCounter5 = loopCounter5 + 1;
        if( 0 == seq_sort.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        unique_xcoords.AddAsLast(asp_x_coord);
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    SeqRemoveAll(sequence_for_sorting);
    if (sort_mode == 0)
    {
      array_size=unique_xcoords.GetSize();
      var_str = Translate("(");
      {
        for(loopCounter2 = 0; loopCounter2 < array_size;)
        {
          loopCounter2 = loopCounter2 + 1;
          if (loopCounter2 != array_size)
          {
            var_str = StrConcat4(var_str, Translate(""), unique_xcoords.ElementAt( loopCounter2 -1), Translate(", "));
          }
          else
          {
            var_str = StrConcat4(var_str, Translate(""), unique_xcoords.ElementAt( loopCounter2 -1), Translate(")"));
          }
        }
      }
      array_size=unique_labIDs.GetSize();
      {
        for(loopCounter2 = 0; loopCounter2 < array_size;)
        {
          loopCounter2 = loopCounter2 + 1;
          arr_valuesLabID.SetSize(0);
          arr_valuesPosID.SetSize(0);
          arr_valuesycoord.SetSize(0);
          arr_valuesprocessed.SetSize(0);
          sql_statement = StrConcat8(Translate("select * from [sheet1$] where [asp_lab_id] = '"), unique_labIDs.ElementAt( loopCounter2 -1), Translate("' and [asp_x_coord] in "), var_str, Translate(""), Translate(""), Translate(""), Translate(""));
          seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
          seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
          seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
          seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
          seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
          seq_sort.AddField("asp_angle", asp_angle, hslFloat);
          if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, sql_statement) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
          }
          {
            loopCounter7 = 0;
            while (
               (seq_sort.Eof() == 0)
            )
            {
              loopCounter7 = loopCounter7 + 1;
              if( 0 == seq_sort.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              arr_valuesLabID.AddAsLast(asp_labid);
              arr_valuesPosID.AddAsLast(asp_pos_id);
              arr_valuesycoord.AddAsLast(asp_y_coord);
              arr_valuesprocessed.AddAsLast(ASWGLOBAL::BOOL::FALSE);
            }
          }
          if( 0 != seq_sort.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          seq_sort.RemoveFields();
          {
            loopCounter3 = 0;
            while (1 == 1)
            {
              loopCounter3 = loopCounter3 + 1;
              var_value_found = Array_Find(ASWGLOBAL::BOOL::FALSE, arr_valuesprocessed);
              if (var_value_found == ASWGLOBAL::BOOL::FALSE)
              {
                break;
              }
              else
              {
                Unique_y_coordinate = 10000000;
                LoopsNum=arr_valuesLabID.GetSize();
                {
                  for(loopCounter4 = 0; loopCounter4 < LoopsNum;)
                  {
                    loopCounter4 = loopCounter4 + 1;
                    if (arr_valuesprocessed.ElementAt( loopCounter4 -1) == ASWGLOBAL::BOOL::FALSE)
                    {
                      deltaY = Unique_y_coordinate - arr_valuesycoord.ElementAt( loopCounter4 -1);
                      if (deltaY >= sort_distance)
                      {
                        SeqAdd(sequence_for_sorting, arr_valuesLabID.ElementAt( loopCounter4 -1), arr_valuesPosID.ElementAt( loopCounter4 -1));
                        arr_valuesprocessed.SetAt(loopCounter4-1, ASWGLOBAL::BOOL::TRUE);
                        Unique_y_coordinate = arr_valuesycoord.ElementAt( loopCounter4 -1);
                      }
                    }
                  }
                }
              }
            }
          }
        }
      }
    }
    else
    {
      if (sort_mode == 1)
      {
        array_size=unique_labIDs.GetSize();
        var_str = Translate("(");
        {
          for(loopCounter2 = 0; loopCounter2 < array_size;)
          {
            loopCounter2 = loopCounter2 + 1;
            if (loopCounter2 != array_size)
            {
              var_str = StrConcat4(var_str, Translate("'"), unique_labIDs.ElementAt( loopCounter2 -1), Translate("', "));
            }
            else
            {
              var_str = StrConcat4(var_str, Translate("'"), unique_labIDs.ElementAt( loopCounter2 -1), Translate("')"));
            }
          }
        }
        array_size=unique_xcoords.GetSize();
        {
          for(loopCounter2 = 0; loopCounter2 < array_size;)
          {
            loopCounter2 = loopCounter2 + 1;
            arr_valuesLabID.SetSize(0);
            arr_valuesPosID.SetSize(0);
            arr_valuesycoord.SetSize(0);
            arr_valuesprocessed.SetSize(0);
            sql_statement = StrConcat8(Translate("select * from [sheet1$] where [asp_lab_id] in "), var_str, Translate(" and [asp_x_coord] = "), unique_xcoords.ElementAt( loopCounter2 -1), Translate(" order by [asp_y_coord] desc"), Translate(""), Translate(""), Translate(""));
            seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
            seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
            seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
            seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
            seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
            seq_sort.AddField("asp_angle", asp_angle, hslFloat);
            if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, sql_statement) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
            }
            {
              loopCounter7 = 0;
              while (
                 (seq_sort.Eof() == 0)
              )
              {
                loopCounter7 = loopCounter7 + 1;
                if( 0 == seq_sort.ReadRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                arr_valuesLabID.AddAsLast(asp_labid);
                arr_valuesPosID.AddAsLast(asp_pos_id);
                arr_valuesycoord.AddAsLast(asp_y_coord);
                arr_valuesprocessed.AddAsLast(ASWGLOBAL::BOOL::FALSE);
              }
            }
            if( 0 != seq_sort.Close() )
            {
                  MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            seq_sort.RemoveFields();
            {
              loopCounter3 = 0;
              while (1 == 1)
              {
                loopCounter3 = loopCounter3 + 1;
                var_value_found = Array_Find(ASWGLOBAL::BOOL::FALSE, arr_valuesprocessed);
                if (var_value_found == ASWGLOBAL::BOOL::FALSE)
                {
                  break;
                }
                else
                {
                  Unique_y_coordinate = 10000000;
                  LoopsNum=arr_valuesLabID.GetSize();
                  {
                    for(loopCounter4 = 0; loopCounter4 < LoopsNum;)
                    {
                      loopCounter4 = loopCounter4 + 1;
                      if (arr_valuesprocessed.ElementAt( loopCounter4 -1) == ASWGLOBAL::BOOL::FALSE)
                      {
                        deltaY = Unique_y_coordinate - arr_valuesycoord.ElementAt( loopCounter4 -1);
                        if (deltaY >= sort_distance)
                        {
                        SeqAdd(sequence_for_sorting, arr_valuesLabID.ElementAt( loopCounter4 -1), arr_valuesPosID.ElementAt( loopCounter4 -1));
                        arr_valuesprocessed.SetAt(loopCounter4-1, ASWGLOBAL::BOOL::TRUE);
                        Unique_y_coordinate = arr_valuesycoord.ElementAt( loopCounter4 -1);
                        }
                      }
                    }
                  }
                }
              }
            }
          }
        }
      }
    }
    sequence_for_sorting.SetCurrentPosition(1);
  }

  function TwoSeq_Channels( device & ML_STAR, sequence & sequence_for_sorting, sequence & secondary_seq, variable sort_distance, variable sort_mode ) void {
    private variable var_array_found;
    private variable loopCounter7;
    private variable asp_angle;
    private variable sql_statement;
    private variable LogFilesPath;
    private variable asp_pos_id;
    private variable asp_labid;
    private variable loopCounter1;
    private variable array_size;
    private variable loopCounter2;
    private variable seq_sort_file;
    private variable asp_y_coord;
    private variable asp_x_coord;
    private variable asp_z_coord;
    private variable loopCounter5;
    private variable var_str;
    private file seq_sort;
    private variable unique_labIDs[];
    private variable unique_xcoords[];
    private variable Unique_y_coordinate;
    private variable deltaY;
    private variable LoopsNum;
    private variable loopCounter3;
    private variable var_value_found;
    private variable loopCounter4;
    private variable arr_valuesycoord[];
    private variable arr_valuesLabID[];
    private variable arr_valuesprocessed[];
    private variable arr_valuesPosID[];
    private variable sec_labid;
    private variable sec_pos_id;
    private variable arr_SecvaluesLabID[];
    private variable arr_SecvaluesPosID[];
    sequence_for_sorting.SetCurrentPosition(1);
    secondary_seq.SetCurrentPosition(1);
    LogFilesPath = FilGetLogFilesPath();
    seq_sort_file = StrConcat4(LogFilesPath, Translate("\\"), Translate("dummy.xls"), Translate(""));
    HSLMapReport::DeleteFile(seq_sort_file);
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort.AddField("sec_lab_id", sec_labid, hslString, 255);
    seq_sort.AddField("sec_pos_id", sec_pos_id, hslString, 255);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (sequence_for_sorting.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, sequence_for_sorting, 1, secondary_seq, 1);
        loopCounter1 = loopCounter1 + 1;
        asp_labid = SeqGetLabwareId(sequence_for_sorting);
        asp_pos_id = SeqGetPositionId(sequence_for_sorting);
        DevGetLabwarePositionEx(ML_STAR, asp_labid, asp_pos_id, asp_x_coord, asp_y_coord, asp_z_coord, asp_angle);
        sec_labid = SeqGetLabwareId(secondary_seq);
        sec_pos_id = SeqGetPositionId(secondary_seq);
        if( 0 == seq_sort.WriteRecord() )
        {
              MECC::RaiseRuntimeError(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
        }
        SeqIncrement(sequence_for_sorting, 1);
        SeqIncrement(secondary_seq, 1);
        if (
           (sequence_for_sorting.GetCurrentPosition() > 0 && sequence_for_sorting.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      sequence_for_sorting.SetMax(sequence_for_sorting.GetTotal());
      secondary_seq.SetMax(secondary_seq.GetTotal());
      sequence_for_sorting.SetCurrentPosition(1);
      secondary_seq.SetCurrentPosition(1);
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeError(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    unique_labIDs.SetSize(0);
    if (sort_mode == 1)
    {
      seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
      if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, "select distinct [asp_lab_id] from [sheet1$]") )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
      }
      {
        loopCounter5 = 0;
        while (
           (seq_sort.Eof() == 0)
        )
        {
          loopCounter5 = loopCounter5 + 1;
          if( 0 == seq_sort.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          unique_labIDs.AddAsLast(asp_labid);
        }
      }
      if( 0 != seq_sort.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      seq_sort.RemoveFields();
    }
    else
    {
      seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
      seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
      seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
      seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
      seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
      seq_sort.AddField("asp_angle", asp_angle, hslFloat);
      if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, "select * from [sheet1$] order by [asp_x_coord] asc, [asp_y_coord] desc") )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
      }
      unique_labIDs.SetSize(0);
      {
        loopCounter5 = 0;
        while (
           (seq_sort.Eof() == 0)
        )
        {
          loopCounter5 = loopCounter5 + 1;
          if( 0 == seq_sort.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          var_array_found = Array_Find(asp_labid, unique_labIDs);
          if (var_array_found == ASWGLOBAL::BOOL::FALSE)
          {
            unique_labIDs.AddAsLast(asp_labid);
          }
        }
      }
      if( 0 != seq_sort.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      seq_sort.RemoveFields();
    }
    unique_xcoords.SetSize(0);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, "select distinct [asp_x_coord] from [sheet1$] order by [asp_x_coord] asc") )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    {
      loopCounter5 = 0;
      while (
         (seq_sort.Eof() == 0)
      )
      {
        loopCounter5 = loopCounter5 + 1;
        if( 0 == seq_sort.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        unique_xcoords.AddAsLast(asp_x_coord);
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    SeqRemoveAll(sequence_for_sorting);
    SeqRemoveAll(secondary_seq);
    if (sort_mode == 0)
    {
      array_size=unique_xcoords.GetSize();
      var_str = Translate("(");
      {
        for(loopCounter2 = 0; loopCounter2 < array_size;)
        {
          loopCounter2 = loopCounter2 + 1;
          if (loopCounter2 != array_size)
          {
            var_str = StrConcat4(var_str, Translate(""), unique_xcoords.ElementAt( loopCounter2 -1), Translate(", "));
          }
          else
          {
            var_str = StrConcat4(var_str, Translate(""), unique_xcoords.ElementAt( loopCounter2 -1), Translate(")"));
          }
        }
      }
      array_size=unique_labIDs.GetSize();
      {
        for(loopCounter2 = 0; loopCounter2 < array_size;)
        {
          loopCounter2 = loopCounter2 + 1;
          arr_valuesLabID.SetSize(0);
          arr_valuesPosID.SetSize(0);
          arr_valuesycoord.SetSize(0);
          arr_valuesprocessed.SetSize(0);
          arr_SecvaluesLabID.SetSize(0);
          arr_SecvaluesPosID.SetSize(0);
          sql_statement = StrConcat8(Translate("select * from [sheet1$] where [asp_lab_id] = '"), unique_labIDs.ElementAt( loopCounter2 -1), Translate("' and [asp_x_coord] in "), var_str, Translate(""), Translate(""), Translate(""), Translate(""));
          seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
          seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
          seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
          seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
          seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
          seq_sort.AddField("asp_angle", asp_angle, hslFloat);
          seq_sort.AddField("sec_lab_id", sec_labid, hslString, 255);
          seq_sort.AddField("sec_pos_id", sec_pos_id, hslString, 255);
          if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, sql_statement) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
          }
          {
            loopCounter7 = 0;
            while (
               (seq_sort.Eof() == 0)
            )
            {
              loopCounter7 = loopCounter7 + 1;
              if( 0 == seq_sort.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              arr_valuesLabID.AddAsLast(asp_labid);
              arr_valuesPosID.AddAsLast(asp_pos_id);
              arr_SecvaluesLabID.AddAsLast(sec_labid);
              arr_SecvaluesPosID.AddAsLast(sec_pos_id);
              arr_valuesycoord.AddAsLast(asp_y_coord);
              arr_valuesprocessed.AddAsLast(ASWGLOBAL::BOOL::FALSE);
            }
          }
          if( 0 != seq_sort.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          seq_sort.RemoveFields();
          {
            loopCounter3 = 0;
            while (1 == 1)
            {
              loopCounter3 = loopCounter3 + 1;
              var_value_found = Array_Find(ASWGLOBAL::BOOL::FALSE, arr_valuesprocessed);
              if (var_value_found == ASWGLOBAL::BOOL::FALSE)
              {
                break;
              }
              else
              {
                Unique_y_coordinate = 10000000;
                LoopsNum=arr_valuesLabID.GetSize();
                {
                  for(loopCounter4 = 0; loopCounter4 < LoopsNum;)
                  {
                    loopCounter4 = loopCounter4 + 1;
                    if (arr_valuesprocessed.ElementAt( loopCounter4 -1) == ASWGLOBAL::BOOL::FALSE)
                    {
                      deltaY = Unique_y_coordinate - arr_valuesycoord.ElementAt( loopCounter4 -1);
                      if (deltaY >= sort_distance)
                      {
                        SeqAdd(sequence_for_sorting, arr_valuesLabID.ElementAt( loopCounter4 -1), arr_valuesPosID.ElementAt( loopCounter4 -1));
                        SeqAdd(secondary_seq, arr_SecvaluesLabID.ElementAt( loopCounter4 -1), arr_SecvaluesPosID.ElementAt( loopCounter4 -1));
                        arr_valuesprocessed.SetAt(loopCounter4-1, ASWGLOBAL::BOOL::TRUE);
                        Unique_y_coordinate = arr_valuesycoord.ElementAt( loopCounter4 -1);
                      }
                    }
                  }
                }
              }
            }
          }
        }
      }
    }
    else
    {
      if (sort_mode == 1)
      {
        array_size=unique_labIDs.GetSize();
        var_str = Translate("(");
        {
          for(loopCounter2 = 0; loopCounter2 < array_size;)
          {
            loopCounter2 = loopCounter2 + 1;
            if (loopCounter2 != array_size)
            {
              var_str = StrConcat4(var_str, Translate("'"), unique_labIDs.ElementAt( loopCounter2 -1), Translate("', "));
            }
            else
            {
              var_str = StrConcat4(var_str, Translate("'"), unique_labIDs.ElementAt( loopCounter2 -1), Translate("')"));
            }
          }
        }
        array_size=unique_xcoords.GetSize();
        {
          for(loopCounter2 = 0; loopCounter2 < array_size;)
          {
            loopCounter2 = loopCounter2 + 1;
            arr_valuesLabID.SetSize(0);
            arr_valuesPosID.SetSize(0);
            arr_valuesycoord.SetSize(0);
            arr_valuesprocessed.SetSize(0);
            arr_SecvaluesLabID.SetSize(0);
            arr_SecvaluesPosID.SetSize(0);
            sql_statement = StrConcat8(Translate("select * from [sheet1$] where [asp_lab_id] in "), var_str, Translate(" and [asp_x_coord] = "), unique_xcoords.ElementAt( loopCounter2 -1), Translate(" order by [asp_y_coord] desc"), Translate(""), Translate(""), Translate(""));
            seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
            seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
            seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
            seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
            seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
            seq_sort.AddField("asp_angle", asp_angle, hslFloat);
            seq_sort.AddField("sec_lab_id", sec_labid, hslString, 255);
            seq_sort.AddField("sec_pos_id", sec_pos_id, hslString, 255);
            if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, sql_statement) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
            }
            {
              loopCounter7 = 0;
              while (
                 (seq_sort.Eof() == 0)
              )
              {
                loopCounter7 = loopCounter7 + 1;
                if( 0 == seq_sort.ReadRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                arr_valuesLabID.AddAsLast(asp_labid);
                arr_valuesPosID.AddAsLast(asp_pos_id);
                arr_SecvaluesLabID.AddAsLast(sec_labid);
                arr_SecvaluesPosID.AddAsLast(sec_pos_id);
                arr_valuesycoord.AddAsLast(asp_y_coord);
                arr_valuesprocessed.AddAsLast(ASWGLOBAL::BOOL::FALSE);
              }
            }
            if( 0 != seq_sort.Close() )
            {
                  MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            seq_sort.RemoveFields();
            {
              loopCounter3 = 0;
              while (1 == 1)
              {
                loopCounter3 = loopCounter3 + 1;
                var_value_found = Array_Find(ASWGLOBAL::BOOL::FALSE, arr_valuesprocessed);
                if (var_value_found == ASWGLOBAL::BOOL::FALSE)
                {
                  break;
                }
                else
                {
                  Unique_y_coordinate = 10000000;
                  LoopsNum=arr_valuesLabID.GetSize();
                  {
                    for(loopCounter4 = 0; loopCounter4 < LoopsNum;)
                    {
                      loopCounter4 = loopCounter4 + 1;
                      if (arr_valuesprocessed.ElementAt( loopCounter4 -1) == ASWGLOBAL::BOOL::FALSE)
                      {
                        deltaY = Unique_y_coordinate - arr_valuesycoord.ElementAt( loopCounter4 -1);
                        if (deltaY >= sort_distance)
                        {
                        SeqAdd(sequence_for_sorting, arr_valuesLabID.ElementAt( loopCounter4 -1), arr_valuesPosID.ElementAt( loopCounter4 -1));
                        SeqAdd(secondary_seq, arr_SecvaluesLabID.ElementAt( loopCounter4 -1), arr_SecvaluesPosID.ElementAt( loopCounter4 -1));
                        arr_valuesprocessed.SetAt(loopCounter4-1, ASWGLOBAL::BOOL::TRUE);
                        Unique_y_coordinate = arr_valuesycoord.ElementAt( loopCounter4 -1);
                        }
                      }
                    }
                  }
                }
              }
            }
          }
        }
      }
    }
    sequence_for_sorting.SetCurrentPosition(1);
    secondary_seq.SetCurrentPosition(1);
  }

  function TwoSeqOneVol_Channels( device & ML_STAR, sequence & sequence_for_sorting, sequence & secondary_seq, variable & sort_array[], variable sort_distance, variable sort_mode ) void {
    private variable loopCounter7;
    private variable var_array_found;
    private variable asp_angle;
    private variable sql_statement;
    private variable LogFilesPath;
    private variable asp_pos_id;
    private variable asp_labid;
    private variable loopCounter1;
    private variable array_size;
    private variable seq_sort_file;
    private variable loopCounter2;
    private variable asp_y_coord;
    private variable asp_x_coord;
    private variable asp_z_coord;
    private variable loopCounter5;
    private variable var_str;
    private file seq_sort;
    private variable unique_labIDs[];
    private variable unique_xcoords[];
    private variable Unique_y_coordinate;
    private variable deltaY;
    private variable LoopsNum;
    private variable asp_volume;
    private variable var_value_found;
    private variable loopCounter3;
    private variable loopCounter4;
    private variable arr_valuesycoord[];
    private variable arr_valuesLabID[];
    private variable arr_valuesprocessed[];
    private variable arr_volumes[];
    private variable arr_valuesPosID[];
    private variable sec_labid;
    private variable sec_pos_id;
    private variable arr_SecvaluesLabID[];
    private variable arr_SecvaluesPosID[];
    sequence_for_sorting.SetCurrentPosition(1);
    secondary_seq.SetCurrentPosition(1);
    LogFilesPath = FilGetLogFilesPath();
    seq_sort_file = StrConcat4(LogFilesPath, Translate("\\"), Translate("dummy.xls"), Translate(""));
    HSLMapReport::DeleteFile(seq_sort_file);
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort.AddField("sec_lab_id", sec_labid, hslString, 255);
    seq_sort.AddField("sec_pos_id", sec_pos_id, hslString, 255);
    seq_sort.AddField("volume", asp_volume, hslFloat);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (sequence_for_sorting.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, sequence_for_sorting, 1, secondary_seq, 1);
        loopCounter1 = loopCounter1 + 1;
        asp_labid = SeqGetLabwareId(sequence_for_sorting);
        asp_pos_id = SeqGetPositionId(sequence_for_sorting);
        DevGetLabwarePositionEx(ML_STAR, asp_labid, asp_pos_id, asp_x_coord, asp_y_coord, asp_z_coord, asp_angle);
        sec_labid = SeqGetLabwareId(secondary_seq);
        sec_pos_id = SeqGetPositionId(secondary_seq);
        asp_volume=sort_array.GetAt(loopCounter1-1);
        if( 0 == seq_sort.WriteRecord() )
        {
              MECC::RaiseRuntimeError(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
        }
        SeqIncrement(sequence_for_sorting, 1);
        SeqIncrement(secondary_seq, 1);
        if (
           (sequence_for_sorting.GetCurrentPosition() > 0 && sequence_for_sorting.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      sequence_for_sorting.SetMax(sequence_for_sorting.GetTotal());
      secondary_seq.SetMax(secondary_seq.GetTotal());
      sequence_for_sorting.SetCurrentPosition(1);
      secondary_seq.SetCurrentPosition(1);
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeError(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    unique_labIDs.SetSize(0);
    if (sort_mode == 1)
    {
      seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
      if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, "select distinct [asp_lab_id] from [sheet1$]") )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
      }
      {
        loopCounter5 = 0;
        while (
           (seq_sort.Eof() == 0)
        )
        {
          loopCounter5 = loopCounter5 + 1;
          if( 0 == seq_sort.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          unique_labIDs.AddAsLast(asp_labid);
        }
      }
      if( 0 != seq_sort.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      seq_sort.RemoveFields();
    }
    else
    {
      seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
      seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
      seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
      seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
      seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
      seq_sort.AddField("asp_angle", asp_angle, hslFloat);
      if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, "select * from [sheet1$] order by [asp_x_coord] asc, [asp_y_coord] desc") )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
      }
      unique_labIDs.SetSize(0);
      {
        loopCounter5 = 0;
        while (
           (seq_sort.Eof() == 0)
        )
        {
          loopCounter5 = loopCounter5 + 1;
          if( 0 == seq_sort.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          var_array_found = Array_Find(asp_labid, unique_labIDs);
          if (var_array_found == ASWGLOBAL::BOOL::FALSE)
          {
            unique_labIDs.AddAsLast(asp_labid);
          }
        }
      }
      if( 0 != seq_sort.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      seq_sort.RemoveFields();
    }
    unique_xcoords.SetSize(0);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, "select distinct [asp_x_coord] from [sheet1$] order by [asp_x_coord] asc") )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    {
      loopCounter5 = 0;
      while (
         (seq_sort.Eof() == 0)
      )
      {
        loopCounter5 = loopCounter5 + 1;
        if( 0 == seq_sort.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        unique_xcoords.AddAsLast(asp_x_coord);
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    SeqRemoveAll(sequence_for_sorting);
    SeqRemoveAll(secondary_seq);
    sort_array.SetSize(0);
    if (sort_mode == 0)
    {
      array_size=unique_xcoords.GetSize();
      var_str = Translate("(");
      {
        for(loopCounter2 = 0; loopCounter2 < array_size;)
        {
          loopCounter2 = loopCounter2 + 1;
          if (loopCounter2 != array_size)
          {
            var_str = StrConcat4(var_str, Translate(""), unique_xcoords.ElementAt( loopCounter2 -1), Translate(", "));
          }
          else
          {
            var_str = StrConcat4(var_str, Translate(""), unique_xcoords.ElementAt( loopCounter2 -1), Translate(")"));
          }
        }
      }
      array_size=unique_labIDs.GetSize();
      {
        for(loopCounter2 = 0; loopCounter2 < array_size;)
        {
          loopCounter2 = loopCounter2 + 1;
          arr_valuesLabID.SetSize(0);
          arr_valuesPosID.SetSize(0);
          arr_valuesycoord.SetSize(0);
          arr_valuesprocessed.SetSize(0);
          arr_SecvaluesLabID.SetSize(0);
          arr_SecvaluesPosID.SetSize(0);
          arr_volumes.SetSize(0);
          sql_statement = StrConcat8(Translate("select * from [sheet1$] where [asp_lab_id] = '"), unique_labIDs.ElementAt( loopCounter2 -1), Translate("' and [asp_x_coord] in "), var_str, Translate(""), Translate(""), Translate(""), Translate(""));
          seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
          seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
          seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
          seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
          seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
          seq_sort.AddField("asp_angle", asp_angle, hslFloat);
          seq_sort.AddField("sec_lab_id", sec_labid, hslString, 255);
          seq_sort.AddField("sec_pos_id", sec_pos_id, hslString, 255);
          seq_sort.AddField("volume", asp_volume, hslFloat);
          if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, sql_statement) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
          }
          {
            loopCounter7 = 0;
            while (
               (seq_sort.Eof() == 0)
            )
            {
              loopCounter7 = loopCounter7 + 1;
              if( 0 == seq_sort.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              arr_valuesLabID.AddAsLast(asp_labid);
              arr_valuesPosID.AddAsLast(asp_pos_id);
              arr_SecvaluesLabID.AddAsLast(sec_labid);
              arr_SecvaluesPosID.AddAsLast(sec_pos_id);
              arr_valuesycoord.AddAsLast(asp_y_coord);
              arr_volumes.AddAsLast(asp_volume);
              arr_valuesprocessed.AddAsLast(ASWGLOBAL::BOOL::FALSE);
            }
          }
          if( 0 != seq_sort.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          seq_sort.RemoveFields();
          {
            loopCounter3 = 0;
            while (1 == 1)
            {
              loopCounter3 = loopCounter3 + 1;
              var_value_found = Array_Find(ASWGLOBAL::BOOL::FALSE, arr_valuesprocessed);
              if (var_value_found == ASWGLOBAL::BOOL::FALSE)
              {
                break;
              }
              else
              {
                Unique_y_coordinate = 10000000;
                LoopsNum=arr_valuesLabID.GetSize();
                {
                  for(loopCounter4 = 0; loopCounter4 < LoopsNum;)
                  {
                    loopCounter4 = loopCounter4 + 1;
                    if (arr_valuesprocessed.ElementAt( loopCounter4 -1) == ASWGLOBAL::BOOL::FALSE)
                    {
                      deltaY = Unique_y_coordinate - arr_valuesycoord.ElementAt( loopCounter4 -1);
                      if (deltaY >= sort_distance)
                      {
                        SeqAdd(sequence_for_sorting, arr_valuesLabID.ElementAt( loopCounter4 -1), arr_valuesPosID.ElementAt( loopCounter4 -1));
                        SeqAdd(secondary_seq, arr_SecvaluesLabID.ElementAt( loopCounter4 -1), arr_SecvaluesPosID.ElementAt( loopCounter4 -1));
                        sort_array.AddAsLast(arr_volumes.ElementAt( loopCounter4 -1));
                        arr_valuesprocessed.SetAt(loopCounter4-1, ASWGLOBAL::BOOL::TRUE);
                        Unique_y_coordinate = arr_valuesycoord.ElementAt( loopCounter4 -1);
                      }
                    }
                  }
                }
              }
            }
          }
        }
      }
    }
    else
    {
      if (sort_mode == 1)
      {
        array_size=unique_labIDs.GetSize();
        var_str = Translate("(");
        {
          for(loopCounter2 = 0; loopCounter2 < array_size;)
          {
            loopCounter2 = loopCounter2 + 1;
            if (loopCounter2 != array_size)
            {
              var_str = StrConcat4(var_str, Translate("'"), unique_labIDs.ElementAt( loopCounter2 -1), Translate("', "));
            }
            else
            {
              var_str = StrConcat4(var_str, Translate("'"), unique_labIDs.ElementAt( loopCounter2 -1), Translate("')"));
            }
          }
        }
        array_size=unique_xcoords.GetSize();
        {
          for(loopCounter2 = 0; loopCounter2 < array_size;)
          {
            loopCounter2 = loopCounter2 + 1;
            arr_valuesLabID.SetSize(0);
            arr_valuesPosID.SetSize(0);
            arr_valuesycoord.SetSize(0);
            arr_valuesprocessed.SetSize(0);
            arr_SecvaluesLabID.SetSize(0);
            arr_SecvaluesPosID.SetSize(0);
            arr_volumes.SetSize(0);
            sql_statement = StrConcat8(Translate("select * from [sheet1$] where [asp_lab_id] in "), var_str, Translate(" and [asp_x_coord] = "), unique_xcoords.ElementAt( loopCounter2 -1), Translate(" order by [asp_y_coord] desc"), Translate(""), Translate(""), Translate(""));
            seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
            seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
            seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
            seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
            seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
            seq_sort.AddField("asp_angle", asp_angle, hslFloat);
            seq_sort.AddField("sec_lab_id", sec_labid, hslString, 255);
            seq_sort.AddField("sec_pos_id", sec_pos_id, hslString, 255);
            seq_sort.AddField("volume", asp_volume, hslFloat);
            if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, sql_statement) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
            }
            {
              loopCounter7 = 0;
              while (
                 (seq_sort.Eof() == 0)
              )
              {
                loopCounter7 = loopCounter7 + 1;
                if( 0 == seq_sort.ReadRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                arr_valuesLabID.AddAsLast(asp_labid);
                arr_valuesPosID.AddAsLast(asp_pos_id);
                arr_SecvaluesLabID.AddAsLast(sec_labid);
                arr_SecvaluesPosID.AddAsLast(sec_pos_id);
                arr_valuesycoord.AddAsLast(asp_y_coord);
                arr_volumes.AddAsLast(asp_volume);
                arr_valuesprocessed.AddAsLast(ASWGLOBAL::BOOL::FALSE);
              }
            }
            if( 0 != seq_sort.Close() )
            {
                  MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            seq_sort.RemoveFields();
            {
              loopCounter3 = 0;
              while (1 == 1)
              {
                loopCounter3 = loopCounter3 + 1;
                var_value_found = Array_Find(ASWGLOBAL::BOOL::FALSE, arr_valuesprocessed);
                if (var_value_found == ASWGLOBAL::BOOL::FALSE)
                {
                  break;
                }
                else
                {
                  Unique_y_coordinate = 10000000;
                  LoopsNum=arr_valuesLabID.GetSize();
                  {
                    for(loopCounter4 = 0; loopCounter4 < LoopsNum;)
                    {
                      loopCounter4 = loopCounter4 + 1;
                      if (arr_valuesprocessed.ElementAt( loopCounter4 -1) == ASWGLOBAL::BOOL::FALSE)
                      {
                        deltaY = Unique_y_coordinate - arr_valuesycoord.ElementAt( loopCounter4 -1);
                        if (deltaY >= sort_distance)
                        {
                        SeqAdd(sequence_for_sorting, arr_valuesLabID.ElementAt( loopCounter4 -1), arr_valuesPosID.ElementAt( loopCounter4 -1));
                        SeqAdd(secondary_seq, arr_SecvaluesLabID.ElementAt( loopCounter4 -1), arr_SecvaluesPosID.ElementAt( loopCounter4 -1));
                        sort_array.AddAsLast(arr_volumes.ElementAt( loopCounter4 -1));
                        arr_valuesprocessed.SetAt(loopCounter4-1, ASWGLOBAL::BOOL::TRUE);
                        Unique_y_coordinate = arr_valuesycoord.ElementAt( loopCounter4 -1);
                        }
                      }
                    }
                  }
                }
              }
            }
          }
        }
      }
    }
    sequence_for_sorting.SetCurrentPosition(1);
    secondary_seq.SetCurrentPosition(1);
  }

  function OneSeqOneVol_Channels( device & ML_STAR, sequence & sequence_for_sorting, variable & sort_array[], variable sort_distance, variable sort_mode ) void {
    private variable var_array_found;
    private variable loopCounter7;
    private variable Unique_y_coordinate;
    private variable deltaY;
    private variable LoopsNum;
    private variable sql_statement;
    private variable asp_angle;
    private variable LogFilesPath;
    private variable asp_pos_id;
    private variable asp_labid;
    private variable array_size;
    private variable loopCounter1;
    private variable seq_sort_file;
    private variable loopCounter2;
    private variable loopCounter3;
    private variable asp_x_coord;
    private variable asp_y_coord;
    private variable var_value_found;
    private variable asp_z_coord;
    private variable loopCounter4;
    private variable loopCounter5;
    private variable var_str;
    private file seq_sort;
    private variable arr_valuesycoord[];
    private variable unique_labIDs[];
    private variable arr_valuesLabID[];
    private variable unique_xcoords[];
    private variable arr_valuesprocessed[];
    private variable arr_valuesPosID[];
    private variable asp_volume;
    private variable arr_volumes[];
    sequence_for_sorting.SetCurrentPosition(1);
    LogFilesPath = FilGetLogFilesPath();
    seq_sort_file = StrConcat4(LogFilesPath, Translate("\\"), Translate("dummy.xls"), Translate(""));
    HSLMapReport::DeleteFile(seq_sort_file);
    seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    seq_sort.AddField("asp_angle", asp_angle, hslFloat);
    seq_sort.AddField("volume", asp_volume, hslFloat);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (sequence_for_sorting.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, sequence_for_sorting, 1);
        loopCounter1 = loopCounter1 + 1;
        asp_labid = SeqGetLabwareId(sequence_for_sorting);
        asp_pos_id = SeqGetPositionId(sequence_for_sorting);
        DevGetLabwarePositionEx(ML_STAR, asp_labid, asp_pos_id, asp_x_coord, asp_y_coord, asp_z_coord, asp_angle);
        asp_volume=sort_array.GetAt(loopCounter1-1);
        if( 0 == seq_sort.WriteRecord() )
        {
              MECC::RaiseRuntimeError(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
        }
        SeqIncrement(sequence_for_sorting, 1);
        if (
           (sequence_for_sorting.GetCurrentPosition() > 0 && sequence_for_sorting.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      sequence_for_sorting.SetMax(sequence_for_sorting.GetTotal());
      sequence_for_sorting.SetCurrentPosition(1);
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeError(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    unique_labIDs.SetSize(0);
    if (sort_mode == 1)
    {
      seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
      if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, "select distinct [asp_lab_id] from [sheet1$]") )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
      }
      {
        loopCounter5 = 0;
        while (
           (seq_sort.Eof() == 0)
        )
        {
          loopCounter5 = loopCounter5 + 1;
          if( 0 == seq_sort.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          unique_labIDs.AddAsLast(asp_labid);
        }
      }
      if( 0 != seq_sort.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      seq_sort.RemoveFields();
    }
    else
    {
      seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
      seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
      seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
      seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
      seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
      seq_sort.AddField("asp_angle", asp_angle, hslFloat);
      seq_sort.AddField("volume", asp_volume, hslFloat);
      if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, "select * from [sheet1$] order by [asp_x_coord] asc, [asp_y_coord] desc") )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
      }
      unique_labIDs.SetSize(0);
      {
        loopCounter5 = 0;
        while (
           (seq_sort.Eof() == 0)
        )
        {
          loopCounter5 = loopCounter5 + 1;
          if( 0 == seq_sort.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          var_array_found = Array_Find(asp_labid, unique_labIDs);
          if (var_array_found == ASWGLOBAL::BOOL::FALSE)
          {
            unique_labIDs.AddAsLast(asp_labid);
          }
        }
      }
      if( 0 != seq_sort.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      seq_sort.RemoveFields();
    }
    unique_xcoords.SetSize(0);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, "select distinct [asp_x_coord] from [sheet1$] order by [asp_x_coord] asc") )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    {
      loopCounter5 = 0;
      while (
         (seq_sort.Eof() == 0)
      )
      {
        loopCounter5 = loopCounter5 + 1;
        if( 0 == seq_sort.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        unique_xcoords.AddAsLast(asp_x_coord);
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    SeqRemoveAll(sequence_for_sorting);
    sort_array.SetSize(0);
    if (sort_mode == 0)
    {
      array_size=unique_xcoords.GetSize();
      var_str = Translate("(");
      {
        for(loopCounter2 = 0; loopCounter2 < array_size;)
        {
          loopCounter2 = loopCounter2 + 1;
          if (loopCounter2 != array_size)
          {
            var_str = StrConcat4(var_str, Translate(""), unique_xcoords.ElementAt( loopCounter2 -1), Translate(", "));
          }
          else
          {
            var_str = StrConcat4(var_str, Translate(""), unique_xcoords.ElementAt( loopCounter2 -1), Translate(")"));
          }
        }
      }
      array_size=unique_labIDs.GetSize();
      {
        for(loopCounter2 = 0; loopCounter2 < array_size;)
        {
          loopCounter2 = loopCounter2 + 1;
          arr_valuesLabID.SetSize(0);
          arr_valuesPosID.SetSize(0);
          arr_valuesycoord.SetSize(0);
          arr_volumes.SetSize(0);
          arr_valuesprocessed.SetSize(0);
          sql_statement = StrConcat8(Translate("select * from [sheet1$] where [asp_lab_id] = '"), unique_labIDs.ElementAt( loopCounter2 -1), Translate("' and [asp_x_coord] in "), var_str, Translate(""), Translate(""), Translate(""), Translate(""));
          seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
          seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
          seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
          seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
          seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
          seq_sort.AddField("asp_angle", asp_angle, hslFloat);
          seq_sort.AddField("volume", asp_volume, hslFloat);
          if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, sql_statement) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
          }
          {
            loopCounter7 = 0;
            while (
               (seq_sort.Eof() == 0)
            )
            {
              loopCounter7 = loopCounter7 + 1;
              if( 0 == seq_sort.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              arr_valuesLabID.AddAsLast(asp_labid);
              arr_valuesPosID.AddAsLast(asp_pos_id);
              arr_valuesycoord.AddAsLast(asp_y_coord);
              arr_volumes.AddAsLast(asp_volume);
              arr_valuesprocessed.AddAsLast(ASWGLOBAL::BOOL::FALSE);
            }
          }
          if( 0 != seq_sort.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          seq_sort.RemoveFields();
          {
            loopCounter3 = 0;
            while (1 == 1)
            {
              loopCounter3 = loopCounter3 + 1;
              var_value_found = Array_Find(ASWGLOBAL::BOOL::FALSE, arr_valuesprocessed);
              if (var_value_found == ASWGLOBAL::BOOL::FALSE)
              {
                break;
              }
              else
              {
                Unique_y_coordinate = 10000000;
                LoopsNum=arr_valuesLabID.GetSize();
                {
                  for(loopCounter4 = 0; loopCounter4 < LoopsNum;)
                  {
                    loopCounter4 = loopCounter4 + 1;
                    if (arr_valuesprocessed.ElementAt( loopCounter4 -1) == ASWGLOBAL::BOOL::FALSE)
                    {
                      deltaY = Unique_y_coordinate - arr_valuesycoord.ElementAt( loopCounter4 -1);
                      if (deltaY >= sort_distance)
                      {
                        SeqAdd(sequence_for_sorting, arr_valuesLabID.ElementAt( loopCounter4 -1), arr_valuesPosID.ElementAt( loopCounter4 -1));
                        sort_array.AddAsLast(arr_volumes.ElementAt( loopCounter4 -1));
                        arr_valuesprocessed.SetAt(loopCounter4-1, ASWGLOBAL::BOOL::TRUE);
                        Unique_y_coordinate = arr_valuesycoord.ElementAt( loopCounter4 -1);
                      }
                    }
                  }
                }
              }
            }
          }
        }
      }
    }
    else
    {
      if (sort_mode == 1)
      {
        array_size=unique_labIDs.GetSize();
        var_str = Translate("(");
        {
          for(loopCounter2 = 0; loopCounter2 < array_size;)
          {
            loopCounter2 = loopCounter2 + 1;
            if (loopCounter2 != array_size)
            {
              var_str = StrConcat4(var_str, Translate("'"), unique_labIDs.ElementAt( loopCounter2 -1), Translate("', "));
            }
            else
            {
              var_str = StrConcat4(var_str, Translate("'"), unique_labIDs.ElementAt( loopCounter2 -1), Translate("')"));
            }
          }
        }
        array_size=unique_xcoords.GetSize();
        {
          for(loopCounter2 = 0; loopCounter2 < array_size;)
          {
            loopCounter2 = loopCounter2 + 1;
            arr_valuesLabID.SetSize(0);
            arr_valuesPosID.SetSize(0);
            arr_valuesycoord.SetSize(0);
            arr_valuesprocessed.SetSize(0);
            arr_volumes.SetSize(0);
            sql_statement = StrConcat8(Translate("select * from [sheet1$] where [asp_lab_id] in "), var_str, Translate(" and [asp_x_coord] = "), unique_xcoords.ElementAt( loopCounter2 -1), Translate(" order by [asp_y_coord] desc"), Translate(""), Translate(""), Translate(""));
            seq_sort.AddField("asp_lab_id", asp_labid, hslString, 255);
            seq_sort.AddField("asp_pos_id", asp_pos_id, hslString, 255);
            seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
            seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
            seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
            seq_sort.AddField("asp_angle", asp_angle, hslFloat);
            seq_sort.AddField("volume", asp_volume, hslFloat);
            if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, sql_statement) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
            }
            {
              loopCounter7 = 0;
              while (
                 (seq_sort.Eof() == 0)
              )
              {
                loopCounter7 = loopCounter7 + 1;
                if( 0 == seq_sort.ReadRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                arr_valuesLabID.AddAsLast(asp_labid);
                arr_valuesPosID.AddAsLast(asp_pos_id);
                arr_valuesycoord.AddAsLast(asp_y_coord);
                arr_volumes.AddAsLast(asp_volume);
                arr_valuesprocessed.AddAsLast(ASWGLOBAL::BOOL::FALSE);
              }
            }
            if( 0 != seq_sort.Close() )
            {
                  MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            seq_sort.RemoveFields();
            {
              loopCounter3 = 0;
              while (1 == 1)
              {
                loopCounter3 = loopCounter3 + 1;
                var_value_found = Array_Find(ASWGLOBAL::BOOL::FALSE, arr_valuesprocessed);
                if (var_value_found == ASWGLOBAL::BOOL::FALSE)
                {
                  break;
                }
                else
                {
                  Unique_y_coordinate = 10000000;
                  LoopsNum=arr_valuesLabID.GetSize();
                  {
                    for(loopCounter4 = 0; loopCounter4 < LoopsNum;)
                    {
                      loopCounter4 = loopCounter4 + 1;
                      if (arr_valuesprocessed.ElementAt( loopCounter4 -1) == ASWGLOBAL::BOOL::FALSE)
                      {
                        deltaY = Unique_y_coordinate - arr_valuesycoord.ElementAt( loopCounter4 -1);
                        if (deltaY >= sort_distance)
                        {
                        SeqAdd(sequence_for_sorting, arr_valuesLabID.ElementAt( loopCounter4 -1), arr_valuesPosID.ElementAt( loopCounter4 -1));
                        sort_array.AddAsLast(arr_volumes.ElementAt( loopCounter4 -1));
                        arr_valuesprocessed.SetAt(loopCounter4-1, ASWGLOBAL::BOOL::TRUE);
                        Unique_y_coordinate = arr_valuesycoord.ElementAt( loopCounter4 -1);
                        }
                      }
                    }
                  }
                }
              }
            }
          }
        }
      }
    }
    sequence_for_sorting.SetCurrentPosition(1);
  }

  private function Array_Find( variable search_value, variable & search_array[] ) variable {
    private variable loopCounter1;
    private variable var_array_size;
    private variable return_val;
    return_val = ASWGLOBAL::BOOL::FALSE;
    var_array_size=search_array.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < var_array_size;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (search_value == search_array.ElementAt( loopCounter1 -1))
        {
          return_val = ASWGLOBAL::BOOL::TRUE;
          break;
        }
      }
    }
    return (return_val);
  }
} // library namespace
