// ======================================================================
// Interface of the library to control the Hamilton Carousel
//
// Copyright (C) by HAMILTON Reno, NV
// All rights reserved.
// ======================================================================
//
// Modification History
//
// 2015-12-01 Vladimir Mamaev
//      - Created Initial File.
//
// ======================================================================

#ifndef __HSLHamiltonMediaFillModule_hsl__
#define __HSLHamiltonMediaFillModule_hsl__ 1

#ifndef HSL_RUNTIME

namespace HSLHamiltonMediaFillModule
{

   function Initialize(
      variable ComPortNumber,        // In: Integer variable
      variable Simulation,           // In: Integer variable
      variable& rInstrumentId)       // Out: Integer
      variable { return(0); }

   function Disconnect(
      variable InstrumentId)         // In: Integer variable
      variable { return(0); }

   function GetPumpDirection(
      variable InstrumentId,         // In: Integer variable
      variable PumpId,               // In: Integer variable
      variable& rDirection)          // Out: Integer variable
      variable {return(0); }

   function SetPumpDirection(
      variable InstrumentId,         // In: Integer variable
      variable PumpId,               // In: Integer variable
      variable Direction)            // In: Integer variable
      variable { return(0); }

   function FillTrough(
      variable InstrumentId,         // In: Integer variable
      variable PumpId,               // In: Integer variable
      variable Speed,                // In: Integer variable
      variable Timeout)              // In: Integer variable
      variable {return(0); }

   function WaitForPump(
      variable InstrumentId,         // In: Integer variable
      variable PumpId)               // In: Integer variable
      variable {return(0); }
}

#endif //end of #ifdef HSL_RUNTIME

#ifdef HSL_RUNTIME

// Include the implementation file
#include "HSLHamiltonMediaFillModule.hs_"

#endif //end of #ifdef HSL_RUNTIME

#endif
