<?xml version="1.0" encoding="utf-8"?>
<MethodSet>
  <PreMethod methodName="384Pre25" creator="MSc" dateTime="2015-11-10T12:14:06.5119836+01:00">
    <TargetBlockTemperature>25</TargetBlockTemperature>
    <TargetLidTemp>115</TargetLidTemp>
  </PreMethod>
  <Method methodName="384Method" creator="MSc" dateTime="2015-11-03T07:57:37.589598+01:00">
    <Variant>3840000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>-1</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>25</StartBlockTemperature>
    <StartLidTemperature>115</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>5</Slope>
      <PlateauTemperature>95</PlateauTemperature>
      <PlateauTime>60</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>115</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>5</Slope>
      <PlateauTemperature>95</PlateauTemperature>
      <PlateauTime>15</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>115</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>2.2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>115</LidTemp>
    </Step>
    <Step>
      <Number>4</Number>
      <Slope>1.4</Slope>
      <PlateauTemperature>55</PlateauTemperature>
      <PlateauTime>15</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>115</LidTemp>
    </Step>
    <Step>
      <Number>5</Number>
      <Slope>5</Slope>
      <PlateauTemperature>72</PlateauTemperature>
      <PlateauTime>30</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>2</GotoNumber>
      <LoopNumber>39</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>115</LidTemp>
    </Step>
    <Step>
      <Number>6</Number>
      <Slope>5</Slope>
      <PlateauTemperature>72</PlateauTemperature>
      <PlateauTime>300</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>115</LidTemp>
    </Step>
    <Step>
      <Number>7</Number>
      <Slope>2.2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>115</LidTemp>
    </Step>
    <Step>
      <Number>8</Number>
      <Slope>1.4</Slope>
      <PlateauTemperature>40</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>115</LidTemp>
    </Step>
    <Step>
      <Number>9</Number>
      <Slope>0.8</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>2</GotoNumber>
      <LoopNumber>8</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>115</LidTemp>
    </Step>
    <Step>
      <Number>10</Number>
      <Slope>0.25</Slope>
      <PlateauTemperature>4</PlateauTemperature>
      <PlateauTime>300</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>115</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>100</PHeating>
        <PCooling>100</PCooling>
        <IHeating>250</IHeating>
        <ICooling>150</ICooling>
        <DHeating>0</DHeating>
        <DCooling>0</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
</MethodSet>