<?xml version="1.0" encoding="utf-8"?>
<MethodSet>
  <PreMethod methodName="Pre25" creator="MSc" dateTime="2015-11-03T07:55:37.2223128+01:00">
    <TargetBlockTemperature>25</TargetBlockTemperature>
    <TargetLidTemp>110</TargetLidTemp>
  </PreMethod>
  <PreMethod methodName="384Pre25" creator="MSc" dateTime="2015-11-10T10:00:46.5458326+01:00">
    <TargetBlockTemperature>25</TargetBlockTemperature>
    <TargetLidTemp>115</TargetLidTemp>
  </PreMethod>
  <Method methodName="Test" creator="MSc" dateTime="2015-11-03T07:52:58.5445587+01:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>1</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>25</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>95</PlateauTemperature>
      <PlateauTime>60</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>7</OverShootTemperature>
      <OverShootTime>6</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>95</PlateauTemperature>
      <PlateauTime>15</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>2</Slope>
      <PlateauTemperature>55</PlateauTemperature>
      <PlateauTime>15</PlateauTime>
      <OverShootSlope1>2</OverShootSlope1>
      <OverShootTemperature>4.6</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>4</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>72</PlateauTemperature>
      <PlateauTime>30</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>10</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>2</GotoNumber>
      <LoopNumber>39</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>5</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>72</PlateauTemperature>
      <PlateauTime>300</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>6</Number>
      <Slope>2</Slope>
      <PlateauTemperature>4</PlateauTemperature>
      <PlateauTime>300</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
  <Method methodName="384Test" creator="MSc" dateTime="2015-11-05T11:07:31.1758872+01:00">
    <Variant>3840000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>-1</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>25</StartBlockTemperature>
    <StartLidTemperature>115</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>5</Slope>
      <PlateauTemperature>95</PlateauTemperature>
      <PlateauTime>60</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>115</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>5</Slope>
      <PlateauTemperature>95</PlateauTemperature>
      <PlateauTime>15</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>115</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>2.2</Slope>
      <PlateauTemperature>55</PlateauTemperature>
      <PlateauTime>15</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>115</LidTemp>
    </Step>
    <Step>
      <Number>4</Number>
      <Slope>5</Slope>
      <PlateauTemperature>72</PlateauTemperature>
      <PlateauTime>30</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>2</GotoNumber>
      <LoopNumber>39</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>115</LidTemp>
    </Step>
    <Step>
      <Number>5</Number>
      <Slope>5</Slope>
      <PlateauTemperature>72</PlateauTemperature>
      <PlateauTime>300</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>115</LidTemp>
    </Step>
    <Step>
      <Number>6</Number>
      <Slope>2.2</Slope>
      <PlateauTemperature>4</PlateauTemperature>
      <PlateauTime>300</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>115</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>100</PHeating>
        <PCooling>100</PCooling>
        <IHeating>250</IHeating>
        <ICooling>150</ICooling>
        <DHeating>0</DHeating>
        <DCooling>0</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
</MethodSet>