#pragma once
#include "Inheco ODTC\\Inheco ODTC.hsl"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLStrLib.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace INHECOODTCCONTROLLER {
  function AbortDevice( variable i_IntDeviceNumber, variable i_strLockID, variable & o_intReturnValue, variable & o_strMessage ) variable ;
  private function Abstract(  ) void ;
  function AddINHECODeviceWarningNumbersToAListOfWarningsThatWillNotCauseAnAbortOfTheMethod( variable i_IntDeviceNumber, variable i_intWarningNumber ) variable ;
  private function AddINHECODeviceWarningsNumbersToReturnToMethodNotifier( variable i_IntDeviceNumber, variable i_intWarningNumber ) variable ;
  function CloseDoor( variable i_IntDeviceNumber, variable i_strLockID, variable & o_intReturnValue, variable & o_strMessage ) variable ;
  function ContinueDevice( variable i_IntDeviceNumber, variable i_strLockID, variable & o_intReturnValue, variable & o_strMessage ) variable ;
  private function DelayDevice( variable i_IntDeviceNumber, variable i_strLockID, variable i_intSecondsToDelayDevice, variable & o_intReturnValue, variable & o_strMessage ) variable ;
  function ExecuteProtocol( variable i_IntDeviceNumber, variable i_strLockID, variable i_strProtocollFullFileName, variable i_strNameOfProtocollOnDevice, variable i_intPriority, variable & o_intTimeForThisProgramSeconds, variable & o_intRequestIDToWaitFor, variable & o_intReturnValue, variable & o_strMessage ) variable ;
  private function FireDataEventForUserNotificationTests( variable i_IntDeviceNumber, variable i_intEventCode, variable i_strEventMessage ) variable ;
  private function FireStatusEventForUserNotificationTests( variable i_IntDeviceNumber, variable i_intEventCode, variable i_strEventMessage, variable & o_strMessage ) variable ;
  function GetConfiguration( variable i_IntDeviceNumber, variable i_strLockID, variable i_intConfigLevel, variable i_strPassword, variable & o_strResult, variable & o_intReturnValue, variable & o_strMessage ) variable ;
  function GetDeviceIdentification( variable i_IntDeviceNumber, variable i_strLockID, variable & o_strFirmwareIdentification, variable & o_strDeviceManufacturer, variable & o_strDeviceName, variable & o_strDeviceSerialNumber, variable & o_strSilaInterFaceVersion, variable & o_strSiLASubversionClass, variable & o_strWSDL, variable & o_intReturnValue, variable & o_strMessage ) variable ;
  function GetParameters( variable i_IntDeviceNumber, variable i_strLockID, variable & o_strResult, variable & o_intReturnValue, variable & o_strMessage ) variable ;
  function GetStatus( variable i_IntDeviceNumber, variable & o_strState, variable & o_strDeviceID, variable & o_blnLocked, variable & o_strPMSID, variable & o_strCurrentDeviceTime, variable & o_intReturnValue, variable & o_strMessage ) variable ;
  function Initialize( variable i_strIPAdressLocal, variable i_str_IpadressOfDevice, variable i_strPortOnDevice, variable i_strPathToWsdlFileOfDevice, variable i_strLogDirectoryFullFilePath, variable i_blnSimulationMode, variable & o_IntDeviceNumber, variable & o_strMessage ) variable ;
  function InitializeDevice( variable i_IntDeviceNumber, variable i_strLockID, variable & o_intReturnValue, variable & o_strMessage ) variable ;
  function LockDevice( variable i_IntDeviceNumber, variable i_intTimeToWaitBeforeReleasingLock, variable i_strPMSID, variable i_strLockID, variable & o_intReturnValue, variable & o_strMessage ) variable ;
  function OpenDoor( variable i_IntDeviceNumber, variable i_strLockID, variable & o_intReturnValue, variable & o_strMessage ) variable ;
  function PauseDevice( variable i_IntDeviceNumber, variable i_strLockID, variable & o_intReturnValue, variable & o_strMessage ) variable ;
  function ReadActualTemperature( variable i_IntDeviceNumber, variable i_strLockID, variable & o_strTime, variable & o_arrfltTemperatures[], variable & o_arrstrTemperatureNames[], variable & o_intReturnValue, variable & o_strMessage ) variable ;
  function ResetDevice( variable i_intDeviceNumber, variable i_intTimeToWait, variable i_strLockID, variable i_strPMSID, variable i_strDeviceIDName, variable i_blnSimulateOnDeviceBase, variable & o_intReturnValue, variable & o_strMessage ) variable ;
  function ReturnAndCleanDataEventMessagesFromDevice( variable i_IntDeviceNumber, variable & o_strReturnValue, variable & o_strMessage ) void ;
  function ReturnAndCleanStatusMessagesFromDevice( variable i_IntDeviceNumber, variable & o_intReturnValue, variable & o_strMessage ) void ;
  function SetDeviceCSVSeparator( variable i_IntDeviceNumber, variable i_strLockID, variable i_strCSVSeparator, variable & o_intReturnValue, variable & o_strMessage ) variable ;
  function SetDeviceDateTime( variable i_IntDeviceNumber, variable i_strLockID, variable i_strDateTime, variable & o_intReturnValue, variable & o_strMessage ) variable ;
  function SetDeviceNetworkConfig( variable i_IntDeviceNumber, variable i_strLockID, variable i_strIPAdress, variable i_strSubNet, variable i_strGateWay, variable i_strDNS1, variable i_strDNS2, variable & o_intReturnValue, variable & o_strMessage ) variable ;
  private function SetUserNotificationFunction( variable i_IntDeviceNumber, variable i_strDataEventNotificationFunction, variable i_strStatusEventNotificationFunction ) variable ;
  function StopMethod( variable i_IntDeviceNumber, variable i_strLockID, variable & o_intReturnValue, variable & o_strMessage ) variable ;
  function TerminateAllDevicesAndCloseComunication( variable & o_strMessage ) variable ;
  function TerminateSingleDevice( variable i_IntDeviceNumber, variable & o_strMessage ) variable ;
  function UnLockDevice( variable i_IntDeviceNumber, variable i_strLockID, variable & o_intReturnValue, variable & o_strMessage ) variable ;
  function WaitForStartedProtocolToFinish( variable i_IntDeviceNumber, variable i_strLockID, variable i_intTimeOut, variable i_intAdditionalSpareTimeToWaitbeforeErrorIsTrigered, variable i_intRequestIDToWaitFor, variable & o_intReturnValue, variable & o_strMessage ) variable ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function AbortDevice( variable i_IntDeviceNumber, variable i_strLockID, variable & o_intReturnValue, variable & o_strMessage ) variable {
    private variable blnSuccess;
    private variable strFunctionName;
    private variable strTrace;
    private variable strLibraryName;
    o_intReturnValue = 0;
    o_strMessage = 0;
    strFunctionName = GetFunctionName();
    strLibraryName = GetFileName();
    strTrace = StrConcat4("i_IntDeviceNumber = ", i_IntDeviceNumber, ", i_strLockID = ", i_strLockID);
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::START, strFunctionName, strLibraryName, strTrace);
    blnSuccess = Inheco_ODTC::Standard::Abort(i_IntDeviceNumber, i_strLockID, o_intReturnValue, o_strMessage);
    strTrace = StrConcat4("o_intReturnValue = ", o_intReturnValue, ", o_strMessage = ", o_strMessage);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strLibraryName, strTrace);
    }
    else
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE, strFunctionName, strLibraryName, strTrace);
    }
    return (blnSuccess);
  }

  function CloseDoor( variable i_IntDeviceNumber, variable i_strLockID, variable & o_intReturnValue, variable & o_strMessage ) variable {
    private variable blnSuccess;
    private variable strFunctionName;
    private variable strTrace;
    private variable strLibraryName;
    o_intReturnValue = 0;
    o_strMessage = 0;
    strFunctionName = GetFunctionName();
    strLibraryName = GetFileName();
    strTrace = StrConcat4("i_IntDeviceNumber = ", i_IntDeviceNumber, ", i_strLockID = ", i_strLockID);
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::START, strFunctionName, strLibraryName, strTrace);
    blnSuccess = Inheco_ODTC::Standard::CloseDoor(i_IntDeviceNumber, i_strLockID, o_intReturnValue, o_strMessage);
    strTrace = StrConcat4("o_intReturnValue = ", o_intReturnValue, ", o_strMessage = ", o_strMessage);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strLibraryName, strTrace);
    }
    else
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE, strFunctionName, strLibraryName, strTrace);
    }
    return (blnSuccess);
  }

  function ContinueDevice( variable i_IntDeviceNumber, variable i_strLockID, variable & o_intReturnValue, variable & o_strMessage ) variable {
    private variable blnSuccess;
    private variable strFunctionName;
    private variable strTrace;
    private variable strLibraryName;
    o_intReturnValue = 0;
    o_strMessage = 0;
    strFunctionName = GetFunctionName();
    strLibraryName = GetFileName();
    strTrace = StrConcat4("i_IntDeviceNumber = ", i_IntDeviceNumber, ", i_strLockID = ", i_strLockID);
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::START, strFunctionName, strLibraryName, strTrace);
    blnSuccess = Inheco_ODTC::Advanced::DoContinue(i_IntDeviceNumber, i_strLockID, o_intReturnValue, o_strMessage);
    strTrace = StrConcat4("o_intReturnValue = ", o_intReturnValue, ", o_strMessage = ", o_strMessage);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strLibraryName, strTrace);
    }
    else
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE, strFunctionName, strLibraryName, strTrace);
    }
    return (blnSuccess);
  }

  function ExecuteProtocol( variable i_IntDeviceNumber, variable i_strLockID, variable i_strProtocollFullFileName, variable i_strNameOfProtocollOnDevice, variable i_intPriority, variable & o_intTimeForThisProgramSeconds, variable & o_intRequestIDToWaitFor, variable & o_intReturnValue, variable & o_strMessage ) variable {
    private variable blnSuccess;
    private variable strFunctionName;
    private variable strTrace;
    private variable strLibraryName;
    o_intTimeForThisProgramSeconds = 0;
    o_intRequestIDToWaitFor = 0;
    o_intReturnValue = 0;
    o_strMessage = 0;
    strFunctionName = GetFunctionName();
    strLibraryName = GetFileName();
    strTrace = StrConcat12("i_IntDeviceNumber = ", i_IntDeviceNumber, ", i_strLockID = ", i_strLockID, ", i_strProtocollFullFileName = ", i_strProtocollFullFileName, ", i_strNameOfProtocollOnDevice = ", i_strNameOfProtocollOnDevice, ", i_intPriority = ", i_intPriority, "", "");
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::START, strFunctionName, strLibraryName, strTrace);
    blnSuccess = Inheco_ODTC::Standard::DownloadProtocol(i_IntDeviceNumber, i_strLockID, i_strProtocollFullFileName, o_intReturnValue, o_strMessage);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strLibraryName, strTrace);
      return (ASWGLOBAL::BOOL::FALSE);
    }
    blnSuccess = Inheco_ODTC::Standard::ExecuteMethod(i_IntDeviceNumber, i_strLockID, i_strNameOfProtocollOnDevice, i_intPriority, o_intTimeForThisProgramSeconds, o_intRequestIDToWaitFor, o_intReturnValue, o_strMessage);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strLibraryName, strTrace);
      return (ASWGLOBAL::BOOL::FALSE);
    }
    strTrace = StrConcat8("o_intTimeForThisProgramSeconds = ", o_intTimeForThisProgramSeconds, ", o_intRequestIDToWaitFor = ", o_intRequestIDToWaitFor, ", o_intReturnValue = ", o_intReturnValue, ", o_strMessage = ", o_strMessage);
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE, strFunctionName, strLibraryName, strTrace);
    return (blnSuccess);
  }

  function GetConfiguration( variable i_IntDeviceNumber, variable i_strLockID, variable i_intConfigLevel, variable i_strPassword, variable & o_strResult, variable & o_intReturnValue, variable & o_strMessage ) variable {
    private variable blnSuccess;
    private variable strFunctionName;
    private variable strTrace;
    private variable strLibraryName;
    o_strResult = 0;
    o_intReturnValue = 0;
    o_strMessage = 0;
    strFunctionName = GetFunctionName();
    strLibraryName = GetFileName();
    strTrace = StrConcat8("i_IntDeviceNumber = ", i_IntDeviceNumber, ", i_strLockID = ", i_strLockID, ", i_intConfigLevel = ", i_intConfigLevel, ", i_strPassword = ", i_strPassword);
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::START, strFunctionName, strLibraryName, strTrace);
    blnSuccess = Inheco_ODTC::Advanced::GetConfiguration(i_IntDeviceNumber, i_strLockID, i_intConfigLevel, i_strPassword, o_strResult, o_intReturnValue, o_strMessage);
    strTrace = StrConcat8("o_strResult = ", o_strResult, ", o_intReturnValue = ", o_intReturnValue, ", o_strMessage = ", o_strMessage, "", "");
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strLibraryName, strTrace);
    }
    else
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE, strFunctionName, strLibraryName, strTrace);
    }
    return (blnSuccess);
  }

  function GetDeviceIdentification( variable i_IntDeviceNumber, variable i_strLockID, variable & o_strFirmwareIdentification, variable & o_strDeviceManufacturer, variable & o_strDeviceName, variable & o_strDeviceSerialNumber, variable & o_strSilaInterFaceVersion, variable & o_strSiLASubversionClass, variable & o_strWSDL, variable & o_intReturnValue, variable & o_strMessage ) variable {
    private variable o_strFirmwareVersion;
    private variable blnSuccess;
    private variable strFunctionName;
    private variable strTrace;
    private variable strLibraryName;
    o_strFirmwareIdentification = 0;
    o_strDeviceManufacturer = 0;
    o_strDeviceName = 0;
    o_strDeviceSerialNumber = 0;
    o_strSilaInterFaceVersion = 0;
    o_strSiLASubversionClass = 0;
    o_strWSDL = 0;
    o_intReturnValue = 0;
    o_strMessage = 0;
    strFunctionName = GetFunctionName();
    strLibraryName = GetFileName();
    strTrace = StrConcat4("i_IntDeviceNumber = ", i_IntDeviceNumber, ", i_strLockID = ", i_strLockID);
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::START, strFunctionName, strLibraryName, strTrace);
    blnSuccess = Inheco_ODTC::Advanced::GetDeviceIdentification(i_IntDeviceNumber, i_strLockID, o_strFirmwareVersion, o_strDeviceManufacturer, o_strDeviceName, o_strDeviceSerialNumber, o_strSilaInterFaceVersion, o_strSiLASubversionClass, o_strWSDL, o_intReturnValue, o_strMessage);
    strTrace = StrConcat12("o_strFirmwareVersion = ", o_strFirmwareVersion, ", o_strDeviceManufacturer = ", o_strDeviceManufacturer, ", o_strDeviceName = ", o_strDeviceName, ", o_strDeviceSerialNumber = ", o_strDeviceSerialNumber, ", o_strSiLASubversionClass = ", o_strSiLASubversionClass, ", o_strWSDL = ", o_strWSDL);
    strTrace = StrConcat8(strTrace, ", o_intReturnValue = ", o_intReturnValue, ", o_strMessage = ", o_strMessage, "", "", "");
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strLibraryName, strTrace);
    }
    else
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE, strFunctionName, strLibraryName, strTrace);
    }
    return (blnSuccess);
  }

  function GetParameters( variable i_IntDeviceNumber, variable i_strLockID, variable & o_strResult, variable & o_intReturnValue, variable & o_strMessage ) variable {
    private variable blnSuccess;
    private variable strFunctionName;
    private variable strTrace;
    private variable strLibraryName;
    o_strResult = 0;
    o_intReturnValue = 0;
    o_strMessage = 0;
    strFunctionName = GetFunctionName();
    strLibraryName = GetFileName();
    strTrace = StrConcat4("i_IntDeviceNumber = ", i_IntDeviceNumber, ", i_strLockID = ", i_strLockID);
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::START, strFunctionName, strLibraryName, strTrace);
    blnSuccess = Inheco_ODTC::Advanced::GetParameters(i_IntDeviceNumber, i_strLockID, o_strResult, o_intReturnValue, o_strMessage);
    strTrace = StrConcat8("o_strResult = ", o_strResult, ", o_intReturnValue = ", o_intReturnValue, ", o_strMessage = ", o_strMessage, "", "");
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strLibraryName, strTrace);
    }
    else
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE, strFunctionName, strLibraryName, strTrace);
    }
    return (blnSuccess);
  }

  function GetStatus( variable i_IntDeviceNumber, variable & o_strState, variable & o_strDeviceID, variable & o_blnLocked, variable & o_strPMSID, variable & o_strCurrentDeviceTime, variable & o_intReturnValue, variable & o_strMessage ) variable {
    private variable blnSuccess;
    private variable strFunctionName;
    private variable strTrace;
    private variable strLibraryName;
    o_strState = 0;
    o_strDeviceID = 0;
    o_blnLocked = 0;
    o_strPMSID = 0;
    o_strCurrentDeviceTime = 0;
    o_intReturnValue = 0;
    o_strMessage = 0;
    strFunctionName = GetFunctionName();
    strLibraryName = GetFileName();
    strTrace = StrConcat2("i_IntDeviceNumber = ", i_IntDeviceNumber);
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::START, strFunctionName, strLibraryName, strTrace);
    blnSuccess = Inheco_ODTC::Standard::GetStatus(i_IntDeviceNumber, o_strDeviceID, o_strState, o_blnLocked, o_strPMSID, o_strCurrentDeviceTime, o_intReturnValue, o_strMessage);
    strTrace = StrConcat12("o_strDeviceID = ", o_strDeviceID, ", o_strState = ", o_strState, ", o_blnLocked = ", o_blnLocked, ", o_strPMSID = ", o_strPMSID, ", o_strCurrentDeviceTime = ", o_strCurrentDeviceTime, ", o_intReturnValue = ", o_intReturnValue);
    strTrace = StrConcat4(strTrace, ", o_strMessage = ", o_strMessage, "");
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strLibraryName, strTrace);
    }
    else
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE, strFunctionName, strLibraryName, strTrace);
    }
    return (blnSuccess);
  }

  function InitializeDevice( variable i_IntDeviceNumber, variable i_strLockID, variable & o_intReturnValue, variable & o_strMessage ) variable {
    private variable blnSuccess;
    private variable strFunctionName;
    private variable strTrace;
    private variable strLibraryName;
    o_intReturnValue = 0;
    o_strMessage = 0;
    strFunctionName = GetFunctionName();
    strLibraryName = GetFileName();
    strTrace = StrConcat4("i_IntDeviceNumber = ", i_IntDeviceNumber, ", i_strLockID = ", i_strLockID);
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::START, strFunctionName, strLibraryName, strTrace);
    blnSuccess = Inheco_ODTC::Standard::Initialize(i_IntDeviceNumber, i_strLockID, o_intReturnValue, o_strMessage);
    strTrace = StrConcat4("o_intReturnValue = ", o_intReturnValue, ", o_strMessage = ", o_strMessage);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strLibraryName, strTrace);
    }
    else
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE, strFunctionName, strLibraryName, strTrace);
    }
    return (blnSuccess);
  }

  function LockDevice( variable i_IntDeviceNumber, variable i_intTimeToWaitBeforeReleasingLock, variable i_strPMSID, variable i_strLockID, variable & o_intReturnValue, variable & o_strMessage ) variable {
    private variable blnSuccess;
    private variable strFunctionName;
    private variable strTrace;
    private variable strLibraryName;
    o_intReturnValue = 0;
    o_strMessage = 0;
    strFunctionName = GetFunctionName();
    strLibraryName = GetFileName();
    strTrace = StrConcat8("i_IntDeviceNumber = ", i_IntDeviceNumber, ", i_intTimeToWaitBeforeReleasingLock = ", i_intTimeToWaitBeforeReleasingLock, ", i_strPMSID = ", i_strPMSID, ", i_strLockID = ", i_strLockID);
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::START, strFunctionName, strLibraryName, strTrace);
    blnSuccess = Inheco_ODTC::Advanced::LockDevice(i_IntDeviceNumber, i_intTimeToWaitBeforeReleasingLock, i_strPMSID, i_strLockID, o_intReturnValue, o_strMessage);
    strTrace = StrConcat4("o_intReturnValue = ", o_intReturnValue, ", o_strMessage = ", o_strMessage);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strLibraryName, strTrace);
    }
    else
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE, strFunctionName, strLibraryName, strTrace);
    }
    return (blnSuccess);
  }

  function OpenDoor( variable i_IntDeviceNumber, variable i_strLockID, variable & o_intReturnValue, variable & o_strMessage ) variable {
    private variable blnSuccess;
    private variable strFunctionName;
    private variable strTrace;
    private variable strLibraryName;
    o_intReturnValue = 0;
    o_strMessage = 0;
    strFunctionName = GetFunctionName();
    strLibraryName = GetFileName();
    strTrace = StrConcat4("i_IntDeviceNumber = ", i_IntDeviceNumber, ", i_strLockID = ", i_strLockID);
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::START, strFunctionName, strLibraryName, strTrace);
    blnSuccess = Inheco_ODTC::Standard::OpenDoor(i_IntDeviceNumber, i_strLockID, o_intReturnValue, o_strMessage);
    strTrace = StrConcat4("o_intReturnValue = ", o_intReturnValue, ", o_strMessage = ", o_strMessage);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strLibraryName, strTrace);
    }
    else
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE, strFunctionName, strLibraryName, strTrace);
    }
    return (blnSuccess);
  }

  function PauseDevice( variable i_IntDeviceNumber, variable i_strLockID, variable & o_intReturnValue, variable & o_strMessage ) variable {
    private variable blnSuccess;
    private variable strFunctionName;
    private variable strTrace;
    private variable strLibraryName;
    o_intReturnValue = 0;
    o_strMessage = 0;
    strFunctionName = GetFunctionName();
    strLibraryName = GetFileName();
    strTrace = StrConcat4("i_IntDeviceNumber = ", i_IntDeviceNumber, ", i_strLockID = ", i_strLockID);
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::START, strFunctionName, strLibraryName, strTrace);
    blnSuccess = Inheco_ODTC::Advanced::Pause(i_IntDeviceNumber, i_strLockID, o_intReturnValue, o_strMessage);
    strTrace = StrConcat4("o_intReturnValue = ", o_intReturnValue, ", o_strMessage = ", o_strMessage);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strLibraryName, strTrace);
    }
    else
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE, strFunctionName, strLibraryName, strTrace);
    }
    return (blnSuccess);
  }

  function ReadActualTemperature( variable i_IntDeviceNumber, variable i_strLockID, variable & o_strTime, variable & o_arrfltTemperatures[], variable & o_arrstrTemperatureNames[], variable & o_intReturnValue, variable & o_strMessage ) variable {
    private variable blnSuccess;
    private variable strFunctionName;
    private variable strTrace;
    private variable strLibraryName;
    o_strTime = 0;
    o_arrfltTemperatures.SetSize( 0);
    o_arrstrTemperatureNames.SetSize( 0);
    o_intReturnValue = 0;
    o_strMessage = 0;
    strFunctionName = GetFunctionName();
    strLibraryName = GetFileName();
    strTrace = StrConcat4("i_IntDeviceNumber = ", i_IntDeviceNumber, ", i_strLockID = ", i_strLockID);
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::START, strFunctionName, strLibraryName, strTrace);
    blnSuccess = Inheco_ODTC::Standard::ReadActualTemperature(i_IntDeviceNumber, i_strLockID, o_strTime, o_arrfltTemperatures, o_arrstrTemperatureNames, o_intReturnValue, o_strMessage);
    TRACELEVEL::TraceArraysFaceToFace(TRACE_LEVEL_DEBUG, "o_arrfltTemperatures", "o_arrstrTemperatureNames", o_arrfltTemperatures, o_arrstrTemperatureNames);
    strTrace = StrConcat8("o_strTime = ", o_strTime, ", o_intReturnValue = ", o_intReturnValue, ", o_strMessage = ", o_strMessage, "", "");
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strLibraryName, strTrace);
    }
    else
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE, strFunctionName, strLibraryName, strTrace);
    }
    return (blnSuccess);
  }

  function ResetDevice( variable i_intDeviceNumber, variable i_intTimeToWait, variable i_strLockID, variable i_strPMSID, variable i_strDeviceIDName, variable i_blnSimulateOnDeviceBase, variable & o_intReturnValue, variable & o_strMessage ) variable {
    private variable blnSuccess;
    private variable strFunctionName;
    private variable strTrace;
    private variable strLibraryName;
    o_intReturnValue = 0;
    o_strMessage = 0;
    strFunctionName = GetFunctionName();
    strLibraryName = GetFileName();
    strTrace = StrConcat12("i_intDeviceNumber = ", i_intDeviceNumber, ", i_intTimeToWait = ", i_intTimeToWait, ", i_strLockID = ", i_strLockID, ", i_strPMSID = ", i_strPMSID, ", i_strDeviceIDName = ", i_strDeviceIDName, ", i_blnSimulateOnDeviceBase = ", i_blnSimulateOnDeviceBase);
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::START, strFunctionName, strLibraryName, strTrace);
    blnSuccess = Inheco_ODTC::Standard::Reset(i_intDeviceNumber, i_blnSimulateOnDeviceBase, i_intTimeToWait, i_strLockID, i_strDeviceIDName, i_strPMSID, o_intReturnValue, o_strMessage);
    strTrace = StrConcat4("o_intReturnValue = ", o_intReturnValue, ", o_strMessage = ", o_strMessage);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strLibraryName, strTrace);
    }
    else
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE, strFunctionName, strLibraryName, strTrace);
    }
    return (blnSuccess);
  }

  function UnLockDevice( variable i_IntDeviceNumber, variable i_strLockID, variable & o_intReturnValue, variable & o_strMessage ) variable {
    private variable blnSuccess;
    private variable strFunctionName;
    private variable strTrace;
    private variable strLibraryName;
    o_intReturnValue = 0;
    o_strMessage = 0;
    strFunctionName = GetFunctionName();
    strLibraryName = GetFileName();
    strTrace = StrConcat4("i_IntDeviceNumber = ", i_IntDeviceNumber, ", i_strLockID = ", i_strLockID);
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::START, strFunctionName, strLibraryName, strTrace);
    blnSuccess = Inheco_ODTC::Advanced::UnlockDevice(i_IntDeviceNumber, i_strLockID, o_intReturnValue, o_strMessage);
    strTrace = StrConcat4("o_intReturnValue = ", o_intReturnValue, ", o_strMessage = ", o_strMessage);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strLibraryName, strTrace);
    }
    else
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE, strFunctionName, strLibraryName, strTrace);
    }
    return (blnSuccess);
  }

  function WaitForStartedProtocolToFinish( variable i_IntDeviceNumber, variable i_strLockID, variable i_intTimeOut, variable i_intAdditionalSpareTimeToWaitbeforeErrorIsTrigered, variable i_intRequestIDToWaitFor, variable & o_intReturnValue, variable & o_strMessage ) variable {
    private variable blnSuccess;
    private variable strFunctionName;
    private variable intTimeToWait;
    private variable strTrace;
    private variable strLibraryName;
    o_intReturnValue = 0;
    o_strMessage = 0;
    strFunctionName = GetFunctionName();
    strLibraryName = GetFileName();
    strTrace = StrConcat12("i_IntDeviceNumber = ", i_IntDeviceNumber, ", i_strLockID = ", i_strLockID, ", intTimeToWait = ", intTimeToWait, ", i_intAdditionalSpareTimeToWaitbeforeErrorIsTrigered = ", i_intAdditionalSpareTimeToWaitbeforeErrorIsTrigered, ", i_intRequestIDToWaitFor = ", i_intRequestIDToWaitFor, "", "");
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::START, strFunctionName, strLibraryName, strTrace);
    intTimeToWait = i_intTimeOut + i_intAdditionalSpareTimeToWaitbeforeErrorIsTrigered;
    strTrace = StrConcat2("Effective time to wait before an error is triggered = ", intTimeToWait);
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::PROGRESS, strFunctionName, strLibraryName, strTrace);
    blnSuccess = Inheco_ODTC::Standard::WaitForEndOfExecuteMethod(i_IntDeviceNumber, intTimeToWait, i_intRequestIDToWaitFor, o_intReturnValue, o_strMessage);
    strTrace = StrConcat4("o_intReturnValue = ", o_intReturnValue, ", o_strMessage = ", o_strMessage);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strLibraryName, strTrace);
    }
    else
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE, strFunctionName, strLibraryName, strTrace);
    }
    return (blnSuccess);
  }

  function Initialize( variable i_strIPAdressLocal, variable i_str_IpadressOfDevice, variable i_strPortOnDevice, variable i_strPathToWsdlFileOfDevice, variable i_strLogDirectoryFullFilePath, variable i_blnSimulationMode, variable & o_IntDeviceNumber, variable & o_strMessage ) variable {
    private variable blnSuccess;
    private variable strFunctionName;
    private variable strTrace;
    private variable strLibraryName;
    o_IntDeviceNumber = 0;
    o_strMessage = 0;
    strFunctionName = GetFunctionName();
    strLibraryName = GetFileName();
    strTrace = StrConcat12("i_strIPAdressLocal = ", i_strIPAdressLocal, ", i_str_IpadressOfDevice = ", i_str_IpadressOfDevice, ", i_strPortOnDevice = ", i_strPortOnDevice, ", i_strPathToWsdlFileOfDevice = ", i_strPathToWsdlFileOfDevice, ", i_strLogDirectoryFullFilePath = ", i_strLogDirectoryFullFilePath, ", i_blnSimulationMode = ", i_blnSimulationMode);
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::START, strFunctionName, strLibraryName, strTrace);
    blnSuccess = Inheco_ODTC::Standard::Connect(i_strIPAdressLocal, i_str_IpadressOfDevice, i_strPortOnDevice, i_blnSimulationMode, o_IntDeviceNumber, o_strMessage);
    Inheco_ODTC::Standard::SetTraceLevel(TRACE_LEVEL_RELEASE);
    strTrace = StrConcat2("o_strMessage = ", o_strMessage);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strLibraryName, strTrace);
    }
    else
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE, strFunctionName, strLibraryName, strTrace);
    }
    return (blnSuccess);
  }

  function TerminateSingleDevice( variable i_IntDeviceNumber, variable & o_strMessage ) variable {
    private variable strFunctionName;
    private variable blnSuccess;
    private variable strTrace;
    private variable strLibraryName;
    o_strMessage = 0;
    strFunctionName = GetFunctionName();
    strLibraryName = GetFileName();
    strTrace = StrConcat2("i_IntDeviceNumber = ", i_IntDeviceNumber);
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::START, strFunctionName, strLibraryName, strTrace);
    blnSuccess = Inheco_ODTC::Standard::Terminate(i_IntDeviceNumber, o_strMessage);
    strTrace = StrConcat2("o_strMessage = ", o_strMessage);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strLibraryName, strTrace);
    }
    else
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE, strFunctionName, strLibraryName, strTrace);
    }
    return (blnSuccess);
  }

  function TerminateAllDevicesAndCloseComunication( variable & o_strMessage ) variable {
    private variable strFunctionName;
    private variable strLibraryName;
    o_strMessage = 0;
    strFunctionName = GetFunctionName();
    strLibraryName = GetFileName();
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::START, strFunctionName, strLibraryName, "");
    o_strMessage = "Function not supported";
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strLibraryName, "Function not supported");
    return (ASWGLOBAL::BOOL::FALSE);
  }

  private function DelayDevice( variable i_IntDeviceNumber, variable i_strLockID, variable i_intSecondsToDelayDevice, variable & o_intReturnValue, variable & o_strMessage ) variable {
    private variable strFunctionName;
    private variable strTrace;
    private variable strLibraryName;
    o_intReturnValue = 0;
    o_strMessage = 0;
    strFunctionName = GetFunctionName();
    strLibraryName = GetFileName();
    strTrace = StrConcat8("i_IntDeviceNumber = ", i_IntDeviceNumber, ", i_strLockID = ", i_strLockID, ", i_intSecondsToDelayDevice = ", i_intSecondsToDelayDevice, "", "");
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::START, strFunctionName, strLibraryName, strTrace);
    o_strMessage = "Function not supported";
    o_intReturnValue = 0;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strLibraryName, "Function not supported");
    return (ASWGLOBAL::BOOL::FALSE);
  }

  function StopMethod( variable i_IntDeviceNumber, variable i_strLockID, variable & o_intReturnValue, variable & o_strMessage ) variable {
    private variable strFunctionName;
    private variable blnSuccess;
    private variable strTrace;
    private variable strLibraryName;
    o_intReturnValue = 0;
    o_strMessage = 0;
    strFunctionName = GetFunctionName();
    strLibraryName = GetFileName();
    strTrace = StrConcat4("i_IntDeviceNumber = ", i_IntDeviceNumber, ", i_strLockID = ", i_strLockID);
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::START, strFunctionName, strLibraryName, strTrace);
    blnSuccess = Inheco_ODTC::Standard::StopMethod(i_IntDeviceNumber, i_strLockID, o_intReturnValue, o_strMessage);
    strTrace = StrConcat4("o_intReturnValue = ", o_intReturnValue, ", o_strMessage = ", o_strMessage);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strLibraryName, strTrace);
    }
    else
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE, strFunctionName, strLibraryName, strTrace);
    }
    return (blnSuccess);
  }

  function SetDeviceDateTime( variable i_IntDeviceNumber, variable i_strLockID, variable i_strDateTime, variable & o_intReturnValue, variable & o_strMessage ) variable {
    private variable strFunctionName;
    private variable blnSuccess;
    private variable strTrace;
    private variable strLibraryName;
    o_intReturnValue = 0;
    o_strMessage = 0;
    strFunctionName = GetFunctionName();
    strLibraryName = GetFileName();
    strTrace = StrConcat8("i_IntDeviceNumber = ", i_IntDeviceNumber, ", i_strLockID = ", i_strLockID, ", i_strDateTime = ", i_strDateTime, "", "");
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::START, strFunctionName, strLibraryName, strTrace);
    blnSuccess = Inheco_ODTC::Advanced::SetDateTime(i_IntDeviceNumber, i_strLockID, i_strDateTime, o_intReturnValue, o_strMessage);
    strTrace = StrConcat4("o_intReturnValue = ", o_intReturnValue, ", o_strMessage = ", o_strMessage);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strLibraryName, strTrace);
    }
    else
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE, strFunctionName, strLibraryName, strTrace);
    }
    return (blnSuccess);
  }

  function SetDeviceNetworkConfig( variable i_IntDeviceNumber, variable i_strLockID, variable i_strIPAdress, variable i_strSubNet, variable i_strGateWay, variable i_strDNS1, variable i_strDNS2, variable & o_intReturnValue, variable & o_strMessage ) variable {
    private variable strFunctionName;
    private variable blnSuccess;
    private variable strTrace;
    private variable strLibraryName;
    o_intReturnValue = 0;
    o_strMessage = 0;
    strFunctionName = GetFunctionName();
    strLibraryName = GetFileName();
    strTrace = StrConcat12("i_IntDeviceNumber = ", i_IntDeviceNumber, ", i_strLockID = ", i_strLockID, ", i_strIPAdress = ", i_strIPAdress, ", i_strSubNet = ", i_strSubNet, ", i_strGateWay = ", i_strGateWay, ", i_strDNS1 = ", i_strDNS1);
    strTrace = StrConcat4(strTrace, ", i_strDNS2 = ", i_strDNS2, "");
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::START, strFunctionName, strLibraryName, strTrace);
    blnSuccess = Inheco_ODTC::Advanced::SetNetWorkConfig(i_IntDeviceNumber, i_strLockID, "DHCP", "255.255.255.0", "192.168.1.1", "", "", o_intReturnValue, o_strMessage);
    strTrace = StrConcat4("o_intReturnValue = ", o_intReturnValue, ", o_strMessage = ", o_strMessage);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strLibraryName, strTrace);
    }
    else
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE, strFunctionName, strLibraryName, strTrace);
    }
    return (blnSuccess);
  }

  function SetDeviceCSVSeparator( variable i_IntDeviceNumber, variable i_strLockID, variable i_strCSVSeparator, variable & o_intReturnValue, variable & o_strMessage ) variable {
    private variable strFunctionName;
    private variable blnSuccess;
    private variable strTrace;
    private variable strLibraryName;
    o_intReturnValue = 0;
    o_strMessage = 0;
    strFunctionName = GetFunctionName();
    strLibraryName = GetFileName();
    strTrace = StrConcat8("i_IntDeviceNumber = ", i_IntDeviceNumber, ", i_strLockID = ", i_strLockID, ", i_strCSVSeparator = ", i_strCSVSeparator, "", "");
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::START, strFunctionName, strLibraryName, strTrace);
    blnSuccess = Inheco_ODTC::Advanced::SetCSVSeparator(i_IntDeviceNumber, i_strLockID, i_strCSVSeparator, o_intReturnValue, o_strMessage);
    strTrace = StrConcat4("o_intReturnValue = ", o_intReturnValue, ", o_strMessage = ", o_strMessage);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strLibraryName, strTrace);
    }
    else
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE, strFunctionName, strLibraryName, strTrace);
    }
    return (blnSuccess);
  }

  function AddINHECODeviceWarningNumbersToAListOfWarningsThatWillNotCauseAnAbortOfTheMethod( variable i_IntDeviceNumber, variable i_intWarningNumber ) variable {
    private variable strFunctionName;
    private variable blnSuccess;
    private variable strTrace;
    private variable strLibraryName;
    strFunctionName = GetFunctionName();
    strLibraryName = GetFileName();
    strTrace = StrConcat4("i_IntDeviceNumber = ", i_IntDeviceNumber, "i_intWarningNumber = ", i_intWarningNumber);
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::START, strFunctionName, strLibraryName, strTrace);
    blnSuccess = Inheco_ODTC::Advanced::AddAllowedReturnCode(i_IntDeviceNumber, i_intWarningNumber);
    if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strLibraryName, "");
    }
    else
    {
      TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::COMPLETE, strFunctionName, strLibraryName, "");
    }
    return (blnSuccess);
  }

  private function AddINHECODeviceWarningsNumbersToReturnToMethodNotifier( variable i_IntDeviceNumber, variable i_intWarningNumber ) variable {
    private variable strFunctionName;
    private variable strTrace;
    private variable strLibraryName;
    strFunctionName = GetFunctionName();
    strLibraryName = GetFileName();
    strTrace = StrConcat4("i_IntDeviceNumber = ", i_IntDeviceNumber, "i_intWarningNumber = ", i_intWarningNumber);
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::START, strFunctionName, strLibraryName, strTrace);
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strLibraryName, "Function not supported");
    return (ASWGLOBAL::BOOL::FALSE);
  }

  private function SetUserNotificationFunction( variable i_IntDeviceNumber, variable i_strDataEventNotificationFunction, variable i_strStatusEventNotificationFunction ) variable {
    private variable strFunctionName;
    private variable strTrace;
    private variable strLibraryName;
    strFunctionName = GetFunctionName();
    strLibraryName = GetFileName();
    strTrace = StrConcat8("i_IntDeviceNumber = ", i_IntDeviceNumber, ", i_strDataEventNotificationFunction = ", i_strDataEventNotificationFunction, ", i_strStatusEventNotificationFunction = ", i_strStatusEventNotificationFunction, "", "");
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::START, strFunctionName, strLibraryName, strTrace);
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strLibraryName, "Function not supported");
    return (ASWGLOBAL::BOOL::FALSE);
  }

  function ReturnAndCleanStatusMessagesFromDevice( variable i_IntDeviceNumber, variable & o_intReturnValue, variable & o_strMessage ) void {
    private variable strFunctionName;
    private variable strTrace;
    private variable strLibraryName;
    o_intReturnValue = 0;
    o_strMessage = 0;
    strFunctionName = GetFunctionName();
    strLibraryName = GetFileName();
    strTrace = StrConcat2("i_IntDeviceNumber = ", i_IntDeviceNumber);
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::START, strFunctionName, strLibraryName, strTrace);
    o_strMessage = "Function not supported";
    o_intReturnValue = 0;
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strLibraryName, "Function not supported");
    return;
  }

  private function FireStatusEventForUserNotificationTests( variable i_IntDeviceNumber, variable i_intEventCode, variable i_strEventMessage, variable & o_strMessage ) variable {
    private variable strFunctionName;
    private variable strTrace;
    private variable strLibraryName;
    o_strMessage = 0;
    strFunctionName = GetFunctionName();
    strLibraryName = GetFileName();
    strTrace = StrConcat8("i_IntDeviceNumber = ", i_IntDeviceNumber, ", i_intEventCode = ", i_intEventCode, ", i_strEventMessage = ", i_strEventMessage, "", "");
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::START, strFunctionName, strLibraryName, strTrace);
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strLibraryName, "Function not supported");
    return (ASWGLOBAL::BOOL::FALSE);
  }

  private function FireDataEventForUserNotificationTests( variable i_IntDeviceNumber, variable i_intEventCode, variable i_strEventMessage ) variable {
    private variable strFunctionName;
    private variable strTrace;
    private variable strLibraryName;
    strFunctionName = GetFunctionName();
    strLibraryName = GetFileName();
    strTrace = StrConcat8("i_IntDeviceNumber = ", i_IntDeviceNumber, ", i_intEventCode = ", i_intEventCode, ", i_strEventMessage = ", i_strEventMessage, "", "");
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::START, strFunctionName, strLibraryName, strTrace);
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strLibraryName, "Function not supported");
    return (ASWGLOBAL::BOOL::FALSE);
  }

  function ReturnAndCleanDataEventMessagesFromDevice( variable i_IntDeviceNumber, variable & o_strReturnValue, variable & o_strMessage ) void {
    private variable strFunctionName;
    private variable strTrace;
    private variable strLibraryName;
    o_strReturnValue = 0;
    o_strMessage = 0;
    strFunctionName = GetFunctionName();
    strLibraryName = GetFileName();
    strTrace = StrConcat2("i_IntDeviceNumber = ", i_IntDeviceNumber);
    TRACELEVEL::TraceAction(TRACE_LEVEL_DEBUG, TRACELEVEL::ACTION::START, strFunctionName, strLibraryName, strTrace);
    o_strMessage = "Function not supported";
    o_strReturnValue = "0";
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, strLibraryName, "Function not supported");
    return;
  }

  private function Abstract(  ) void {
    MECC::TraceComment(Translate("This Library allows the comunication with the INHECO on Deck Thermo Cycler\nThe Firmware version of the Device is:\n\n\nThis Library \nVersion 1.0.4    31.01.2015  Lutz Geisen     New Firmware, SetDateTime, SetNetworkconfig, GetLastData, SetCSV separator\nVersion 1.0.6    31.01.2015  Lutz Geisen     New Error handling on Return values extended to ignore warnings\nVersion 1.0.6    31.01.2015  Lutz Geisen     New Errorhandling with asynchrounuos Status and Dataevent handling for up to 4 devices implemented."));
  }
} // library namespace
