#pragma once
#include "HSLUtilLib2.hsl"
#include "HSLSeqLib.hsl"
#include "HSLML_STARLib.hsl"
#include "HSLMthLib.hsl"
#include "Illumina Prep Methods\\Nextera XT DNA\\VirtualLabware\\VirtualLabware.hsl"
#include "Library\\NexteraXTPrep.hs_"
#include "Illumina Prep Methods\\Nextera XT DNA\\HslHamHeaterShakerLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLMETEDLib.hs_"
#include "Illumina Prep Methods\\Nextera XT DNA\\HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"
#include "HSLSTCCLib.hs_"

namespace NEXTERAXTPROCESSES {
  variable NumberOfCompleteColumns;
  variable RemainingWells;
  function Add_AdaptersViaRAP( device & ML_STAR, sequence & seq_Tips50ul, sequence & seq_RAP, sequence & seq_ALP, variable & arr_Index1Positions[], variable & arr_Index2Positions[], variable & arr_ALPpositions[] ) void ;
  function Add_AmpureMulti( device & ML_STAR, sequence & seq_AmpureBeads, sequence & seq_Destination, sequence & seq_Tips, variable var_NumberSamples, variable var_BeadVolumePerWell ) void ;
  function Add_AmpureSingle( device & ML_STAR, sequence & seq_AmpureBeads, sequence & seq_Destination, sequence & seq_Tips, variable var_NumberSamples, variable var_BeadVolumePerWell, variable var_LLD_On, variable var_TipUsage ) void ;
  function Add_BeadsFromVial( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse1000ul, sequence & seq_TipsToUse50ul, variable var_VolPerSampleWell, variable var_LiquidClass1ml_Premix, variable var_LiquidClass50F ) void ;
  function Add_BeadsFromVial_96samples_per_vial( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse1000ul, sequence & seq_TipsToUse50ul, variable var_VolPerSampleWell, variable var_LiquidClass1ml_Premix, variable var_LiquidClass50F ) void ;
  function Add_BeadsFromVial_wNewTips( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse1000ul, sequence & seq_TipsToUse50ul, variable var_VolPerSampleWell, variable var_LiquidClass1ml_Premix, variable var_LiquidClass50F ) void ;
  function Add_Control( device & ML_STAR, variable var_NumberOfSamples, variable var_UseControl, sequence & seq_AspirationPosition, sequence & seq_ResuspensionBuffer, sequence & seq_DispensePosition, sequence & seq_TipsToUse50ul, variable var_VolPerSampleWell, variable var_LiquidClass50F ) void ;
  function Add_Control_1TubeOnly( device & ML_STAR, variable var_NumberOfSamples, variable var_UseControl, sequence & seq_AspirationPosition, sequence & seq_ResuspensionBuffer, sequence & seq_DispensePosition, sequence & seq_TipsToUse50ul, variable var_VolPerSampleWell, variable var_LiquidClass50F ) void ;
  function Add_Ethanol( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_TipsToUse1000ul, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_LiquidClassEthanol, variable & var_TrackingEthanolVolume ) void ;
  function Add_IndexesViaVials( device & ML_STAR, sequence & seq_Tips50, sequence & seq_Adapters, sequence & seq_ALP, variable var_NumberOfIndexTypes, variable & arr_Index1Positions[], variable & arr_Index2Positions[], variable & arr_ALPpositions[] ) void ;
  function Add_NaOH( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse, variable var_VolPerSampleWell, variable var_RetractHeight ) void ;
  function Add_Oil( device & ML_STAR, sequence & seq_Tips50ul, sequence & seq_HSP, sequence & seq_Oil ) void ;
  function Add_RSBFromVial_4Vials( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse50ul, variable var_VolPerSampleWell, variable var_LiquidClass50F, variable var_RetractHeight ) void ;
  function Add_ReagentFromHalfHeightVial( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse50ul, variable var_VolPerSampleWell, variable var_LiquidClass50F, variable var_RetractHeight_Disp, variable var_NumberOfVials ) void ;
  function Add_ReagentFromVial( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse50ul, variable var_VolPerSampleWell, variable var_LiquidClass50F, variable var_RetractHeight, variable var_NumberOfVials ) void ;
  function Add_WashBuffer( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse, variable var_VolPerSampleWell, variable var_LiquidClass50F, variable var_RetractHeight ) void ;
  function Add_XPBeads( device & ML_STAR, sequence & seq_TipsToUse300ul, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_SampleQuality ) void ;
  function ErrorHandling_TipPickup( device & ML_STAR, sequence & seq_TipsToUse ) void ;
  function MoveHSP( device & ML_STAR, sequence & seq_HSP_StartingPosition, sequence & seq_HSP_Destination, variable var_TrackToReadBC, variable var_ParkAfterMove, variable var_TransportTool, sequence & seq_COREGrippers ) void ;
  function MoveMIDI( device & ML_STAR, sequence & seq_MIDI_Source, sequence & seq_MIDI_Destination, variable var_TrackToReadBC, variable var_Side, variable var_ParkAfterMove, variable var_TransportTool, sequence & seq_COREGrippers ) void ;
  private function Move_HSP_wCOREgrippers( device & ML_STAR, sequence & seq_HSP_StartingPosition, sequence & seq_HSP_Destination, sequence seq_CORE_Grippers, variable var_TrackToReadBC, variable var_ParkAfterMove ) void ;
  private function Move_MIDI_wCOREgrippers( device & ML_STAR, sequence & seq_MIDI_Source, sequence & seq_MIDI_Destination, sequence seq_CORE_Grippers, variable var_TrackToReadBC, variable var_ParkAfterMove ) void ;
  function Pool( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse, variable var_VolPerSampleWell, variable var_RetractHeight ) void ;
  function Read_NormFile( device & ML_STAR, variable var_NormalizationFile, variable & var_TotalBufferVolume, variable & var_NumberOfSamples ) void ;
  function Remove_ResidualSupernatant( device & ML_STAR, sequence & seq_TipsToUse50ul, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_VolumeToTransfer, variable var_LiquidClass ) void ;
  function Shake_ParallelProcessing( device & ML_STAR, variable var_HHS_ID, variable var_Speed, variable var_ShakingDuration, variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse50ul, variable var_VolPerSampleWell, variable var_LiquidClass50F, variable var_RetractHeight, variable var_NumberOfVials ) void ;
  function Transfer_CleanSample( device & ML_STAR, sequence & seq_TipsToUse50ul, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_VolumeToTransfer ) void ;
  function Transfer_PlateToPlate( device & ML_STAR, sequence & seq_TipsToUse, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_VolumeToTransfer, variable var_LiquidClass, variable var_AspirationHeight, variable var_DispenseHeight ) void ;
  function Transfer_PlatetoWaste( device & ML_STAR, sequence & seq_TipsToUse300ul, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_VolumeToTransfer, variable var_LiquidClass ) void ;
  private function _VersionInfo(  ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    NEXTERAXTPREP::_InitLibrary();
  }
  function _ExitLibrary() {
    NEXTERAXTPREP::_ExitLibrary();
  }

  private function _VersionInfo(  ) void {
  }

  function Transfer_PlateToPlate( device & ML_STAR, sequence & seq_TipsToUse, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_VolumeToTransfer, variable var_LiquidClass, variable var_AspirationHeight, variable var_DispenseHeight ) void {
    private variable loopCounter1;
    private variable Asp_Submerge;
    private variable Asp_cLLD_sensitivity;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Transfer_PlateToPlate <<<<<<<<<<"));
    if (var_AspirationHeight == 0)
    {
      Asp_cLLD_sensitivity = 1;
      Asp_Submerge = 0.5;
    }
    else
    {
      Asp_cLLD_sensitivity = 0;
      Asp_Submerge = 0;
    }
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
    {
      loopCounter1 = 0;
      while (
         (seq_AspirationPosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_TipsToUse, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_1 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_1 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_AspirationPosition.GetCurrentPosition() > 0 && seq_AspirationPosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse.SetMax(seq_TipsToUse.GetTotal());
      seq_AspirationPosition.SetCurrentPosition(1);
      seq_DispensePosition.SetCurrentPosition(1);
    }
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_2[];
      variable _ColumnIdsArray_2[];
      variable _ColumnNamesArray_2[];
      variable _ExperimentsArray_2[];
      _FilterIdsArray_2.SetSize(0);
      _ColumnNamesArray_2.SetSize(14);
      _ColumnIdsArray_2.SetSize(14);
      _ColumnNamesArray_2.SetAt(0, "RecordId");
      _ColumnIdsArray_2.SetAt(0, 0);
      _ColumnNamesArray_2.SetAt(1, "TRackBC");
      _ColumnIdsArray_2.SetAt(1, 1);
      _ColumnNamesArray_2.SetAt(2, "TLabwareId");
      _ColumnIdsArray_2.SetAt(2, 2);
      _ColumnNamesArray_2.SetAt(3, "TPositionId");
      _ColumnIdsArray_2.SetAt(3, 3);
      _ColumnNamesArray_2.SetAt(4, "TPositionBC");
      _ColumnIdsArray_2.SetAt(4, 4);
      _ColumnNamesArray_2.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_2.SetAt(5, 5);
      _ColumnNamesArray_2.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_2.SetAt(6, 6);
      _ColumnNamesArray_2.SetAt(7, "TVolume");
      _ColumnIdsArray_2.SetAt(7, 7);
      _ColumnNamesArray_2.SetAt(8, "SRackBC");
      _ColumnIdsArray_2.SetAt(8, 8);
      _ColumnNamesArray_2.SetAt(9, "SLabwareId");
      _ColumnIdsArray_2.SetAt(9, 9);
      _ColumnNamesArray_2.SetAt(10, "SPositionId");
      _ColumnIdsArray_2.SetAt(10, 10);
      _ColumnNamesArray_2.SetAt(11, "SPositionBC");
      _ColumnIdsArray_2.SetAt(11, 11);
      _ColumnNamesArray_2.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_2.SetAt(12, 12);
      _ColumnNamesArray_2.SetAt(13, "UserName");
      _ColumnIdsArray_2.SetAt(13, 13);
      _ExperimentsArray_2.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_2, 0, _ColumnIdsArray_2, _ColumnNamesArray_2, _ExperimentsArray_2, "TransferPlateToPlate_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Transfer_PlateToPlate <<<<<<<<<<"));
  }

  function Add_XPBeads( device & ML_STAR, sequence & seq_TipsToUse300ul, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_SampleQuality ) void {
    private variable loopCounter1;
    private variable PremixVolume;
    private variable PremixCycles;
    private variable NumberOfWells;
    private variable BeadVolume;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_XPBeads <<<<<<<<<<"));
    NumberOfWells = seq_DispensePosition.GetCount();
    if (NumberOfWells <= 24)
    {
      PremixVolume = 99;
    }
    else
    {
      PremixVolume = 300;
    }
    Trace ("Pre-mix volume:  ",  PremixVolume);
    if (var_SampleQuality == 1)
    {
      MECC::TraceComment(Translate("***** High Quality Sample - Smaller Bead Volume *****"));
      BeadVolume = 99;
    }
    else
    {
      MECC::TraceComment(Translate("***** Low Quality / Degraded Sample - Larger bead volume *****"));
      BeadVolume = 193;
    }
    {
      loopCounter1 = 0;
      while (
         (seq_DispensePosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_TipsToUse300ul, 1);
        loopCounter1 = loopCounter1 + 1;
        if (loopCounter1 == 1)
        {
          PremixCycles = 6;
        }
        else
        {
          PremixCycles = 1;
        }
        onerror goto errLabel_3 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_3 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse300ul);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse300ul.SetMax(seq_TipsToUse300ul.GetTotal());
      seq_AspirationPosition.SetCurrentPosition(1);
      seq_DispensePosition.SetCurrentPosition(1);
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_4[];
      variable _ColumnIdsArray_4[];
      variable _ColumnNamesArray_4[];
      variable _ExperimentsArray_4[];
      _FilterIdsArray_4.SetSize(0);
      _ColumnNamesArray_4.SetSize(14);
      _ColumnIdsArray_4.SetSize(14);
      _ColumnNamesArray_4.SetAt(0, "RecordId");
      _ColumnIdsArray_4.SetAt(0, 0);
      _ColumnNamesArray_4.SetAt(1, "TRackBC");
      _ColumnIdsArray_4.SetAt(1, 1);
      _ColumnNamesArray_4.SetAt(2, "TLabwareId");
      _ColumnIdsArray_4.SetAt(2, 2);
      _ColumnNamesArray_4.SetAt(3, "TPositionId");
      _ColumnIdsArray_4.SetAt(3, 3);
      _ColumnNamesArray_4.SetAt(4, "TPositionBC");
      _ColumnIdsArray_4.SetAt(4, 4);
      _ColumnNamesArray_4.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_4.SetAt(5, 5);
      _ColumnNamesArray_4.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_4.SetAt(6, 6);
      _ColumnNamesArray_4.SetAt(7, "TVolume");
      _ColumnIdsArray_4.SetAt(7, 7);
      _ColumnNamesArray_4.SetAt(8, "SRackBC");
      _ColumnIdsArray_4.SetAt(8, 8);
      _ColumnNamesArray_4.SetAt(9, "SLabwareId");
      _ColumnIdsArray_4.SetAt(9, 9);
      _ColumnNamesArray_4.SetAt(10, "SPositionId");
      _ColumnIdsArray_4.SetAt(10, 10);
      _ColumnNamesArray_4.SetAt(11, "SPositionBC");
      _ColumnIdsArray_4.SetAt(11, 11);
      _ColumnNamesArray_4.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_4.SetAt(12, 12);
      _ColumnNamesArray_4.SetAt(13, "UserName");
      _ColumnIdsArray_4.SetAt(13, 13);
      _ExperimentsArray_4.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_4, 0, _ColumnIdsArray_4, _ColumnNamesArray_4, _ExperimentsArray_4, "XPBeads_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_XPBeads <<<<<<<<<<"));
  }

  function Transfer_PlatetoWaste( device & ML_STAR, sequence & seq_TipsToUse300ul, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_VolumeToTransfer, variable var_LiquidClass ) void {
    private variable loopCounter1;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Transfer_PlatetoWaste <<<<<<<<<<"));
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
    {
      loopCounter1 = 0;
      while (
         (seq_AspirationPosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_TipsToUse300ul, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_5 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_5 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse300ul);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_AspirationPosition.GetCurrentPosition() > 0 && seq_AspirationPosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse300ul.SetMax(seq_TipsToUse300ul.GetTotal());
      seq_AspirationPosition.SetCurrentPosition(1);
      seq_DispensePosition.SetCurrentPosition(1);
    }
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_6[];
      variable _ColumnIdsArray_6[];
      variable _ColumnNamesArray_6[];
      variable _ExperimentsArray_6[];
      _FilterIdsArray_6.SetSize(0);
      _ColumnNamesArray_6.SetSize(14);
      _ColumnIdsArray_6.SetSize(14);
      _ColumnNamesArray_6.SetAt(0, "RecordId");
      _ColumnIdsArray_6.SetAt(0, 0);
      _ColumnNamesArray_6.SetAt(1, "TRackBC");
      _ColumnIdsArray_6.SetAt(1, 1);
      _ColumnNamesArray_6.SetAt(2, "TLabwareId");
      _ColumnIdsArray_6.SetAt(2, 2);
      _ColumnNamesArray_6.SetAt(3, "TPositionId");
      _ColumnIdsArray_6.SetAt(3, 3);
      _ColumnNamesArray_6.SetAt(4, "TPositionBC");
      _ColumnIdsArray_6.SetAt(4, 4);
      _ColumnNamesArray_6.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_6.SetAt(5, 5);
      _ColumnNamesArray_6.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_6.SetAt(6, 6);
      _ColumnNamesArray_6.SetAt(7, "TVolume");
      _ColumnIdsArray_6.SetAt(7, 7);
      _ColumnNamesArray_6.SetAt(8, "SRackBC");
      _ColumnIdsArray_6.SetAt(8, 8);
      _ColumnNamesArray_6.SetAt(9, "SLabwareId");
      _ColumnIdsArray_6.SetAt(9, 9);
      _ColumnNamesArray_6.SetAt(10, "SPositionId");
      _ColumnIdsArray_6.SetAt(10, 10);
      _ColumnNamesArray_6.SetAt(11, "SPositionBC");
      _ColumnIdsArray_6.SetAt(11, 11);
      _ColumnNamesArray_6.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_6.SetAt(12, 12);
      _ColumnNamesArray_6.SetAt(13, "UserName");
      _ColumnIdsArray_6.SetAt(13, 13);
      _ExperimentsArray_6.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_6, 0, _ColumnIdsArray_6, _ColumnNamesArray_6, _ExperimentsArray_6, "TransferToWaste_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Transfer_PlatetoWaste <<<<<<<<<<"));
  }

  function Transfer_CleanSample( device & ML_STAR, sequence & seq_TipsToUse50ul, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_VolumeToTransfer ) void {
    private variable loopCounter1;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Transfer_CleanSample <<<<<<<<<<"));
    {
      loopCounter1 = 0;
      while (
         (seq_AspirationPosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_TipsToUse50ul, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_7 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_7 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse50ul);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_AspirationPosition.GetCurrentPosition() > 0 && seq_AspirationPosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse50ul.SetMax(seq_TipsToUse50ul.GetTotal());
      seq_AspirationPosition.SetCurrentPosition(1);
      seq_DispensePosition.SetCurrentPosition(1);
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_8[];
      variable _ColumnIdsArray_8[];
      variable _ColumnNamesArray_8[];
      variable _ExperimentsArray_8[];
      _FilterIdsArray_8.SetSize(0);
      _ColumnNamesArray_8.SetSize(14);
      _ColumnIdsArray_8.SetSize(14);
      _ColumnNamesArray_8.SetAt(0, "RecordId");
      _ColumnIdsArray_8.SetAt(0, 0);
      _ColumnNamesArray_8.SetAt(1, "TRackBC");
      _ColumnIdsArray_8.SetAt(1, 1);
      _ColumnNamesArray_8.SetAt(2, "TLabwareId");
      _ColumnIdsArray_8.SetAt(2, 2);
      _ColumnNamesArray_8.SetAt(3, "TPositionId");
      _ColumnIdsArray_8.SetAt(3, 3);
      _ColumnNamesArray_8.SetAt(4, "TPositionBC");
      _ColumnIdsArray_8.SetAt(4, 4);
      _ColumnNamesArray_8.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_8.SetAt(5, 5);
      _ColumnNamesArray_8.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_8.SetAt(6, 6);
      _ColumnNamesArray_8.SetAt(7, "TVolume");
      _ColumnIdsArray_8.SetAt(7, 7);
      _ColumnNamesArray_8.SetAt(8, "SRackBC");
      _ColumnIdsArray_8.SetAt(8, 8);
      _ColumnNamesArray_8.SetAt(9, "SLabwareId");
      _ColumnIdsArray_8.SetAt(9, 9);
      _ColumnNamesArray_8.SetAt(10, "SPositionId");
      _ColumnIdsArray_8.SetAt(10, 10);
      _ColumnNamesArray_8.SetAt(11, "SPositionBC");
      _ColumnIdsArray_8.SetAt(11, 11);
      _ColumnNamesArray_8.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_8.SetAt(12, 12);
      _ColumnNamesArray_8.SetAt(13, "UserName");
      _ColumnIdsArray_8.SetAt(13, 13);
      _ExperimentsArray_8.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_8, 0, _ColumnIdsArray_8, _ColumnNamesArray_8, _ExperimentsArray_8, "TransferCleanSample_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Transfer_CleanSample <<<<<<<<<<"));
  }

  function Add_ReagentFromVial( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse50ul, variable var_VolPerSampleWell, variable var_LiquidClass50F, variable var_RetractHeight, variable var_NumberOfVials ) void {
    private variable loopCounter1;
    private variable PositionID_Vial_1;
    private variable NumberSamplesMoreThan48;
    private variable LabwareID_Vial;
    private variable NumberSamplesUpTo48;
    private variable PositionID_Vial_2;
    private variable loopCounter2;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_ReagentFromVial <<<<<<<<<<"));
    if (var_NumberOfVials == 2)
    {
      if (var_NumberOfSamples > 48)
      {
        NumberSamplesMoreThan48 = var_NumberOfSamples - 48;
        NumberSamplesUpTo48 = var_NumberOfSamples - (2 * NumberSamplesMoreThan48);
      }
      else
      {
        NumberSamplesMoreThan48 = 0;
        NumberSamplesUpTo48 = var_NumberOfSamples;
      }
      LabwareID_Vial = SeqGetLabwareId(seq_AspirationPosition);
      PositionID_Vial_1 = SeqGetPositionId(seq_AspirationPosition);
      SeqIncrement(seq_AspirationPosition, 1);
      PositionID_Vial_2 = SeqGetPositionId(seq_AspirationPosition);
      SeqRemoveAll(seq_AspirationPosition);
      {
        for(loopCounter2 = 0; loopCounter2 < NumberSamplesMoreThan48;)
        {
          loopCounter2 = loopCounter2 + 1;
          SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
          SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_2);
        }
      }
      {
        for(loopCounter2 = 0; loopCounter2 < NumberSamplesUpTo48;)
        {
          loopCounter2 = loopCounter2 + 1;
          SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
        }
      }
    }
    else
    {
      LabwareID_Vial = SeqGetLabwareId(seq_AspirationPosition);
      PositionID_Vial_1 = SeqGetPositionId(seq_AspirationPosition);
      SeqRemoveAll(seq_AspirationPosition);
      {
        for(loopCounter2 = 0; loopCounter2 < var_NumberOfSamples;)
        {
          loopCounter2 = loopCounter2 + 1;
          SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
        }
      }
    }
    seq_AspirationPosition.SetCurrentPosition(1);
    Util2::Debug::TraceSequence(seq_AspirationPosition);
    MECC::TraceComment(Translate("********** Now pipetting reagent to destination plate"));
    {
      loopCounter1 = 0;
      while (
         (seq_DispensePosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_DispensePosition, 1, seq_TipsToUse50ul, 1, seq_AspirationPosition, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_9 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_9 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse50ul);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse50ul.SetMax(seq_TipsToUse50ul.GetTotal());
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetCurrentPosition(1);
      seq_AspirationPosition.SetCurrentPosition(1);
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_10[];
      variable _ColumnIdsArray_10[];
      variable _ColumnNamesArray_10[];
      variable _ExperimentsArray_10[];
      _FilterIdsArray_10.SetSize(0);
      _ColumnNamesArray_10.SetSize(14);
      _ColumnIdsArray_10.SetSize(14);
      _ColumnNamesArray_10.SetAt(0, "RecordId");
      _ColumnIdsArray_10.SetAt(0, 0);
      _ColumnNamesArray_10.SetAt(1, "TRackBC");
      _ColumnIdsArray_10.SetAt(1, 1);
      _ColumnNamesArray_10.SetAt(2, "TLabwareId");
      _ColumnIdsArray_10.SetAt(2, 2);
      _ColumnNamesArray_10.SetAt(3, "TPositionId");
      _ColumnIdsArray_10.SetAt(3, 3);
      _ColumnNamesArray_10.SetAt(4, "TPositionBC");
      _ColumnIdsArray_10.SetAt(4, 4);
      _ColumnNamesArray_10.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_10.SetAt(5, 5);
      _ColumnNamesArray_10.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_10.SetAt(6, 6);
      _ColumnNamesArray_10.SetAt(7, "TVolume");
      _ColumnIdsArray_10.SetAt(7, 7);
      _ColumnNamesArray_10.SetAt(8, "SRackBC");
      _ColumnIdsArray_10.SetAt(8, 8);
      _ColumnNamesArray_10.SetAt(9, "SLabwareId");
      _ColumnIdsArray_10.SetAt(9, 9);
      _ColumnNamesArray_10.SetAt(10, "SPositionId");
      _ColumnIdsArray_10.SetAt(10, 10);
      _ColumnNamesArray_10.SetAt(11, "SPositionBC");
      _ColumnIdsArray_10.SetAt(11, 11);
      _ColumnNamesArray_10.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_10.SetAt(12, 12);
      _ColumnNamesArray_10.SetAt(13, "UserName");
      _ColumnIdsArray_10.SetAt(13, 13);
      _ExperimentsArray_10.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_10, 0, _ColumnIdsArray_10, _ColumnNamesArray_10, _ExperimentsArray_10, "Reagent_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_ReagentFromVial <<<<<<<<<<"));
  }

  function Add_Control( device & ML_STAR, variable var_NumberOfSamples, variable var_UseControl, sequence & seq_AspirationPosition, sequence & seq_ResuspensionBuffer, sequence & seq_DispensePosition, sequence & seq_TipsToUse50ul, variable var_VolPerSampleWell, variable var_LiquidClass50F ) void {
    private variable loopCounter1;
    private sequence seq_PipetteReagentFrom;
    private variable PositionID_Vial_1;
    private variable PositionID_Vial_2;
    private variable NumberSamplesMoreThan48;
    private variable loopCounter2;
    private variable LabwareID_Vial;
    private variable NumberSamplesUpTo48;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_Control <<<<<<<<<<"));
    if (var_UseControl == 1)
    {
      if (var_NumberOfSamples > 48)
      {
        NumberSamplesMoreThan48 = var_NumberOfSamples - 48;
        NumberSamplesUpTo48 = var_NumberOfSamples - (2 * NumberSamplesMoreThan48);
      }
      else
      {
        NumberSamplesMoreThan48 = 0;
        NumberSamplesUpTo48 = var_NumberOfSamples;
      }
      LabwareID_Vial = SeqGetLabwareId(seq_AspirationPosition);
      PositionID_Vial_1 = SeqGetPositionId(seq_AspirationPosition);
      SeqIncrement(seq_AspirationPosition, 1);
      PositionID_Vial_2 = SeqGetPositionId(seq_AspirationPosition);
      SeqRemoveAll(seq_AspirationPosition);
      {
        for(loopCounter2 = 0; loopCounter2 < NumberSamplesMoreThan48;)
        {
          loopCounter2 = loopCounter2 + 1;
          SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
          SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_2);
        }
      }
      {
        for(loopCounter2 = 0; loopCounter2 < NumberSamplesUpTo48;)
        {
          loopCounter2 = loopCounter2 + 1;
          SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
        }
      }
      seq_AspirationPosition.SetCurrentPosition(1);
      SeqOperatorAssignSeq(seq_PipetteReagentFrom, seq_AspirationPosition);
    }
    else
    {
      SeqOperatorAssignSeq(seq_PipetteReagentFrom, seq_ResuspensionBuffer);
    }
    MECC::TraceComment(Translate("********** Now pipetting reagent to destination plate"));
    {
      loopCounter1 = 0;
      while (
         (seq_DispensePosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_DispensePosition, 1, seq_PipetteReagentFrom, 1, seq_TipsToUse50ul, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_11 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_11 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse50ul);
        }   /* end if from skip handler if no error */
        if (var_UseControl == 1)
        {
          MECC::TraceComment(Translate("***********************************************************************************\n******************************* Pipetting Control  *******************************\n************************************************************************************"));
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          MECC::TraceComment(Translate("***********************************************************************************\n********************* Pipetting Buffer instead of Control **********************\n************************************************************************************"));
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_PipetteReagentFrom.SetMax(seq_PipetteReagentFrom.GetTotal());
      seq_TipsToUse50ul.SetMax(seq_TipsToUse50ul.GetTotal());
      seq_DispensePosition.SetCurrentPosition(1);
      seq_PipetteReagentFrom.SetCurrentPosition(1);
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_PipetteReagentFrom);
    {
      variable _FilterIdsArray_12[];
      variable _ColumnIdsArray_12[];
      variable _ColumnNamesArray_12[];
      variable _ExperimentsArray_12[];
      _FilterIdsArray_12.SetSize(0);
      _ColumnNamesArray_12.SetSize(14);
      _ColumnIdsArray_12.SetSize(14);
      _ColumnNamesArray_12.SetAt(0, "RecordId");
      _ColumnIdsArray_12.SetAt(0, 0);
      _ColumnNamesArray_12.SetAt(1, "TRackBC");
      _ColumnIdsArray_12.SetAt(1, 1);
      _ColumnNamesArray_12.SetAt(2, "TLabwareId");
      _ColumnIdsArray_12.SetAt(2, 2);
      _ColumnNamesArray_12.SetAt(3, "TPositionId");
      _ColumnIdsArray_12.SetAt(3, 3);
      _ColumnNamesArray_12.SetAt(4, "TPositionBC");
      _ColumnIdsArray_12.SetAt(4, 4);
      _ColumnNamesArray_12.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_12.SetAt(5, 5);
      _ColumnNamesArray_12.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_12.SetAt(6, 6);
      _ColumnNamesArray_12.SetAt(7, "TVolume");
      _ColumnIdsArray_12.SetAt(7, 7);
      _ColumnNamesArray_12.SetAt(8, "SRackBC");
      _ColumnIdsArray_12.SetAt(8, 8);
      _ColumnNamesArray_12.SetAt(9, "SLabwareId");
      _ColumnIdsArray_12.SetAt(9, 9);
      _ColumnNamesArray_12.SetAt(10, "SPositionId");
      _ColumnIdsArray_12.SetAt(10, 10);
      _ColumnNamesArray_12.SetAt(11, "SPositionBC");
      _ColumnIdsArray_12.SetAt(11, 11);
      _ColumnNamesArray_12.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_12.SetAt(12, 12);
      _ColumnNamesArray_12.SetAt(13, "UserName");
      _ColumnIdsArray_12.SetAt(13, 13);
      _ExperimentsArray_12.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_12, 0, _ColumnIdsArray_12, _ColumnNamesArray_12, _ExperimentsArray_12, "Control_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_Control <<<<<<<<<<"));
  }

  function Add_IndexesViaVials( device & ML_STAR, sequence & seq_Tips50, sequence & seq_Adapters, sequence & seq_ALP, variable var_NumberOfIndexTypes, variable & arr_Index1Positions[], variable & arr_Index2Positions[], variable & arr_ALPpositions[] ) void {
    private variable WellID;
    private variable LabwareID_ALP;
    private variable LabwareID_Adapters;
    private variable Index1_Pos;
    private variable Index2_Pos;
    private variable Size_arrayALP;
    private variable loopCounter2;
    private variable loopCounter3;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_IndexesViaVials <<<<<<<<<<"));
    LabwareID_Adapters = SeqGetLabwareId(seq_Adapters);
    LabwareID_ALP = SeqGetLabwareId(seq_ALP);
    SeqRemoveAll(seq_Adapters);
    SeqRemoveAll(seq_ALP);
    Size_arrayALP=arr_ALPpositions.GetSize();
    {
      for(loopCounter2 = 0; loopCounter2 < Size_arrayALP;)
      {
        loopCounter2 = loopCounter2 + 1;
        WellID=arr_ALPpositions.GetAt(loopCounter2-1);
        SeqAdd(seq_ALP, LabwareID_ALP, WellID);
        Index1_Pos=arr_Index1Positions.GetAt(loopCounter2-1);
        SeqAdd(seq_Adapters, LabwareID_Adapters, Index1_Pos);
      }
    }
    if (var_NumberOfIndexTypes == 2)
    {
      {
        for(loopCounter2 = 0; loopCounter2 < Size_arrayALP;)
        {
          loopCounter2 = loopCounter2 + 1;
          Index2_Pos=arr_Index2Positions.GetAt(loopCounter2-1);
          SeqAdd(seq_Adapters, LabwareID_Adapters, Index2_Pos);
        }
      }
    }
    seq_Adapters.SetCurrentPosition(1);
    seq_ALP.SetCurrentPosition(1);
    MECC::TraceComment(Translate("********** Fill the ALP with the Index1 adapters **************"));
    {
      loopCounter3 = 0;
      while (
         (seq_ALP.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_ALP, 1, seq_Adapters, 1, seq_Tips50, 1);
        loopCounter3 = loopCounter3 + 1;
        onerror goto errLabel_13 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_13 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_Tips50);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_ALP.GetCurrentPosition() > 0 && seq_ALP.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_ALP.SetMax(seq_ALP.GetTotal());
      seq_Adapters.SetMax(seq_Adapters.GetTotal());
      seq_Tips50.SetMax(seq_Tips50.GetTotal());
      seq_ALP.SetCurrentPosition(1);
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_Adapters);
    {
      variable _FilterIdsArray_14[];
      variable _ColumnIdsArray_14[];
      variable _ColumnNamesArray_14[];
      variable _ExperimentsArray_14[];
      _FilterIdsArray_14.SetSize(0);
      _ColumnNamesArray_14.SetSize(14);
      _ColumnIdsArray_14.SetSize(14);
      _ColumnNamesArray_14.SetAt(0, "RecordId");
      _ColumnIdsArray_14.SetAt(0, 0);
      _ColumnNamesArray_14.SetAt(1, "TRackBC");
      _ColumnIdsArray_14.SetAt(1, 1);
      _ColumnNamesArray_14.SetAt(2, "TLabwareId");
      _ColumnIdsArray_14.SetAt(2, 2);
      _ColumnNamesArray_14.SetAt(3, "TPositionId");
      _ColumnIdsArray_14.SetAt(3, 3);
      _ColumnNamesArray_14.SetAt(4, "TPositionBC");
      _ColumnIdsArray_14.SetAt(4, 4);
      _ColumnNamesArray_14.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_14.SetAt(5, 5);
      _ColumnNamesArray_14.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_14.SetAt(6, 6);
      _ColumnNamesArray_14.SetAt(7, "TVolume");
      _ColumnIdsArray_14.SetAt(7, 7);
      _ColumnNamesArray_14.SetAt(8, "SRackBC");
      _ColumnIdsArray_14.SetAt(8, 8);
      _ColumnNamesArray_14.SetAt(9, "SLabwareId");
      _ColumnIdsArray_14.SetAt(9, 9);
      _ColumnNamesArray_14.SetAt(10, "SPositionId");
      _ColumnIdsArray_14.SetAt(10, 10);
      _ColumnNamesArray_14.SetAt(11, "SPositionBC");
      _ColumnIdsArray_14.SetAt(11, 11);
      _ColumnNamesArray_14.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_14.SetAt(12, 12);
      _ColumnNamesArray_14.SetAt(13, "UserName");
      _ColumnIdsArray_14.SetAt(13, 13);
      _ExperimentsArray_14.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_ALP, 3, _FilterIdsArray_14, 0, _ColumnIdsArray_14, _ColumnNamesArray_14, _ExperimentsArray_14, "Adapters1_to_ALP_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    if (var_NumberOfIndexTypes == 2)
    {
      MECC::TraceComment(Translate("**************** Fill the ALP with the Index2 adapters, if any **********************"));
      {
        loopCounter3 = 0;
        while (
           (seq_ALP.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, seq_ALP, 1, seq_Adapters, 1, seq_Tips50, 1);
          loopCounter3 = loopCounter3 + 1;
          onerror goto errLabel_15 ;
          err.Clear();
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          errLabel_15 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            ErrorHandling_TipPickup(ML_STAR, seq_Tips50);
          }   /* end if from skip handler if no error */
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (seq_ALP.GetCurrentPosition() > 0 && seq_ALP.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        seq_ALP.SetMax(seq_ALP.GetTotal());
        seq_Adapters.SetMax(seq_Adapters.GetTotal());
        seq_Tips50.SetMax(seq_Tips50.GetTotal());
        seq_ALP.SetCurrentPosition(1);
        seq_Adapters.SetCurrentPosition(1);
      }
      STCC::ResetFilterSequences();
      STCC::AddFilterSequence(ML_STAR, seq_Adapters);
      {
        variable _FilterIdsArray_16[];
        variable _ColumnIdsArray_16[];
        variable _ColumnNamesArray_16[];
        variable _ExperimentsArray_16[];
        _FilterIdsArray_16.SetSize(0);
        _ColumnNamesArray_16.SetSize(14);
        _ColumnIdsArray_16.SetSize(14);
        _ColumnNamesArray_16.SetAt(0, "RecordId");
        _ColumnIdsArray_16.SetAt(0, 0);
        _ColumnNamesArray_16.SetAt(1, "TRackBC");
        _ColumnIdsArray_16.SetAt(1, 1);
        _ColumnNamesArray_16.SetAt(2, "TLabwareId");
        _ColumnIdsArray_16.SetAt(2, 2);
        _ColumnNamesArray_16.SetAt(3, "TPositionId");
        _ColumnIdsArray_16.SetAt(3, 3);
        _ColumnNamesArray_16.SetAt(4, "TPositionBC");
        _ColumnIdsArray_16.SetAt(4, 4);
        _ColumnNamesArray_16.SetAt(5, "TStatusSummary");
        _ColumnIdsArray_16.SetAt(5, 5);
        _ColumnNamesArray_16.SetAt(6, "TSumStateDescription");
        _ColumnIdsArray_16.SetAt(6, 6);
        _ColumnNamesArray_16.SetAt(7, "TVolume");
        _ColumnIdsArray_16.SetAt(7, 7);
        _ColumnNamesArray_16.SetAt(8, "SRackBC");
        _ColumnIdsArray_16.SetAt(8, 8);
        _ColumnNamesArray_16.SetAt(9, "SLabwareId");
        _ColumnIdsArray_16.SetAt(9, 9);
        _ColumnNamesArray_16.SetAt(10, "SPositionId");
        _ColumnIdsArray_16.SetAt(10, 10);
        _ColumnNamesArray_16.SetAt(11, "SPositionBC");
        _ColumnIdsArray_16.SetAt(11, 11);
        _ColumnNamesArray_16.SetAt(12, "ActionDateTime");
        _ColumnIdsArray_16.SetAt(12, 12);
        _ColumnNamesArray_16.SetAt(13, "UserName");
        _ColumnIdsArray_16.SetAt(13, 13);
        _ExperimentsArray_16.SetSize(0);
        STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_ALP, 3, _FilterIdsArray_16, 0, _ColumnIdsArray_16, _ColumnNamesArray_16, _ExperimentsArray_16, "Adapters2_to_ALP_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_IndexesViaVials <<<<<<<<<<"));
  }

  function Add_AdaptersViaRAP( device & ML_STAR, sequence & seq_Tips50ul, sequence & seq_RAP, sequence & seq_ALP, variable & arr_Index1Positions[], variable & arr_Index2Positions[], variable & arr_ALPpositions[] ) void {
    private variable loopCounter1;
    private variable LabwareID_ALP;
    private variable Size_arrayALP;
    private variable WellID;
    private variable LabwareID_Adapters;
    private variable loopCounter2;
    private variable Index2_Pos_RAP_Row;
    private variable Index_Pos_RAP;
    private variable Index1_Pos_RAP_Column;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_AdaptersViaRAP <<<<<<<<<<"));
    LabwareID_Adapters = SeqGetLabwareId(seq_RAP);
    LabwareID_ALP = SeqGetLabwareId(seq_ALP);
    SeqRemoveAll(seq_RAP);
    SeqRemoveAll(seq_ALP);
    Size_arrayALP=arr_ALPpositions.GetSize();
    {
      for(loopCounter2 = 0; loopCounter2 < Size_arrayALP;)
      {
        loopCounter2 = loopCounter2 + 1;
        WellID=arr_ALPpositions.GetAt(loopCounter2-1);
        SeqAdd(seq_ALP, LabwareID_ALP, WellID);
        Index1_Pos_RAP_Column=arr_Index1Positions.GetAt(loopCounter2-1);
        Index2_Pos_RAP_Row=arr_Index2Positions.GetAt(loopCounter2-1);
        if (Index2_Pos_RAP_Row == "1")
        {
          Index2_Pos_RAP_Row = Translate("A");
        }
        if (Index2_Pos_RAP_Row == "2")
        {
          Index2_Pos_RAP_Row = Translate("B");
        }
        if (Index2_Pos_RAP_Row == "3")
        {
          Index2_Pos_RAP_Row = Translate("C");
        }
        if (Index2_Pos_RAP_Row == "4")
        {
          Index2_Pos_RAP_Row = Translate("D");
        }
        if (Index2_Pos_RAP_Row == "5")
        {
          Index2_Pos_RAP_Row = Translate("E");
        }
        if (Index2_Pos_RAP_Row == "6")
        {
          Index2_Pos_RAP_Row = Translate("F");
        }
        if (Index2_Pos_RAP_Row == "7")
        {
          Index2_Pos_RAP_Row = Translate("G");
        }
        if (Index2_Pos_RAP_Row == "8")
        {
          Index2_Pos_RAP_Row = Translate("H");
        }
        Index_Pos_RAP = Index2_Pos_RAP_Row + Index1_Pos_RAP_Column;
        SeqAdd(seq_RAP, LabwareID_Adapters, Index_Pos_RAP);
        Trace ("Index mixture in RAP well ", Index_Pos_RAP, " will go to ALP well ", WellID);
      }
    }
    seq_RAP.SetCurrentPosition(1);
    seq_ALP.SetCurrentPosition(1);
    {
      loopCounter1 = 0;
      while (
         (seq_ALP.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_ALP, 1, seq_RAP, 1, seq_Tips50ul, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_17 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_17 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_Tips50ul);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_ALP.GetCurrentPosition() > 0 && seq_ALP.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_ALP.SetMax(seq_ALP.GetTotal());
      seq_RAP.SetMax(seq_RAP.GetTotal());
      seq_Tips50ul.SetMax(seq_Tips50ul.GetTotal());
      seq_ALP.SetCurrentPosition(1);
      seq_RAP.SetCurrentPosition(1);
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_ALP);
    {
      variable _FilterIdsArray_18[];
      variable _ColumnIdsArray_18[];
      variable _ColumnNamesArray_18[];
      variable _ExperimentsArray_18[];
      _FilterIdsArray_18.SetSize(0);
      _ColumnNamesArray_18.SetSize(14);
      _ColumnIdsArray_18.SetSize(14);
      _ColumnNamesArray_18.SetAt(0, "RecordId");
      _ColumnIdsArray_18.SetAt(0, 0);
      _ColumnNamesArray_18.SetAt(1, "TRackBC");
      _ColumnIdsArray_18.SetAt(1, 1);
      _ColumnNamesArray_18.SetAt(2, "TLabwareId");
      _ColumnIdsArray_18.SetAt(2, 2);
      _ColumnNamesArray_18.SetAt(3, "TPositionId");
      _ColumnIdsArray_18.SetAt(3, 3);
      _ColumnNamesArray_18.SetAt(4, "TPositionBC");
      _ColumnIdsArray_18.SetAt(4, 4);
      _ColumnNamesArray_18.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_18.SetAt(5, 5);
      _ColumnNamesArray_18.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_18.SetAt(6, 6);
      _ColumnNamesArray_18.SetAt(7, "TVolume");
      _ColumnIdsArray_18.SetAt(7, 7);
      _ColumnNamesArray_18.SetAt(8, "SRackBC");
      _ColumnIdsArray_18.SetAt(8, 8);
      _ColumnNamesArray_18.SetAt(9, "SLabwareId");
      _ColumnIdsArray_18.SetAt(9, 9);
      _ColumnNamesArray_18.SetAt(10, "SPositionId");
      _ColumnIdsArray_18.SetAt(10, 10);
      _ColumnNamesArray_18.SetAt(11, "SPositionBC");
      _ColumnIdsArray_18.SetAt(11, 11);
      _ColumnNamesArray_18.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_18.SetAt(12, 12);
      _ColumnNamesArray_18.SetAt(13, "UserName");
      _ColumnIdsArray_18.SetAt(13, 13);
      _ExperimentsArray_18.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_RAP, 3, _FilterIdsArray_18, 0, _ColumnIdsArray_18, _ColumnNamesArray_18, _ExperimentsArray_18, "RAP_to_ALP_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_AdaptersViaRAP <<<<<<<<<<"));
  }

  function MoveMIDI( device & ML_STAR, sequence & seq_MIDI_Source, sequence & seq_MIDI_Destination, variable var_TrackToReadBC, variable var_Side, variable var_ParkAfterMove, variable var_TransportTool, sequence & seq_COREGrippers ) void {
    private variable GripWidth;
    private variable GripInverse;
    private variable GripOpening;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  MoveMIDI <<<<<<<<<<"));
    if (var_TransportTool == 1)
    {
      if (var_Side == 0)
      {
        MECC::TraceComment(Translate("***** Gripping on small side *****"));
        GripWidth = 80;
        GripOpening = 87;
        GripInverse = 1;
      }
      else
      {
        MECC::TraceComment(Translate("***** Gripping on large side *****"));
        GripWidth = 123.7;
        GripOpening = 130.2;
        GripInverse = 0;
      }
      ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
      if (var_TrackToReadBC > 0)
      {
        ML_STAR._3ADE1686_D394_4a08_918C_20E3EDA3CC69("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"); // ReadPlateBarcode
      }
      ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
      if (var_ParkAfterMove == 1)
      {
        ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
      }
    }
    if (var_TransportTool == 2)
    {
      Move_MIDI_wCOREgrippers(ML_STAR, seq_MIDI_Source, seq_MIDI_Destination, seq_COREGrippers, var_TrackToReadBC, var_ParkAfterMove);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  MoveMIDI <<<<<<<<<<"));
  }

  function MoveHSP( device & ML_STAR, sequence & seq_HSP_StartingPosition, sequence & seq_HSP_Destination, variable var_TrackToReadBC, variable var_ParkAfterMove, variable var_TransportTool, sequence & seq_COREGrippers ) void {
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  MoveHSP <<<<<<<<<"));
    if (var_TransportTool == 1)
    {
      ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
      if (var_TrackToReadBC > 0)
      {
        ML_STAR._3ADE1686_D394_4a08_918C_20E3EDA3CC69("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"); // ReadPlateBarcode
      }
      ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
      if (var_ParkAfterMove == 1)
      {
        ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
      }
    }
    if (var_TransportTool == 2)
    {
      Move_HSP_wCOREgrippers(ML_STAR, seq_HSP_StartingPosition, seq_HSP_Destination, seq_COREGrippers, var_TrackToReadBC, var_ParkAfterMove);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  MoveHSP <<<<<<<<<<"));
  }

  function Add_BeadsFromVial_wNewTips( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse1000ul, sequence & seq_TipsToUse50ul, variable var_VolPerSampleWell, variable var_LiquidClass1ml_Premix, variable var_LiquidClass50F ) void {
    private variable loopCounter1;
    private variable MixVolume2;
    private variable ChPatternMixing;
    private variable TotalVolume;
    private variable First48Volume;
    private variable RemainingVolume;
    private variable MixVolume1;
    private variable arr_MixVols[];
    private variable PositionID_Vial_1;
    private variable PositionID_Vial_2;
    private variable NumberSamplesMoreThan48;
    private variable loopCounter2;
    private variable LabwareID_Vial;
    private variable NumberSamplesUpTo48;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_ReagentFromVial_wNewTips <<<<<<<<<<"));
    TotalVolume = var_VolPerSampleWell * var_NumberOfSamples;
    if (var_NumberOfSamples > 48)
    {
      ChPatternMixing = Translate("11000000");
      First48Volume = var_VolPerSampleWell * 48;
      RemainingVolume = TotalVolume - First48Volume;
      MixVolume1 = First48Volume / (2 * 1.0);
      MixVolume2 = RemainingVolume / (2 * 1.0);
      if (MixVolume1 > 1000)
      {
        MixVolume1 = 1000;
      }
      if (MixVolume2 > 1000)
      {
        MixVolume2 = 1000;
      }
    }
    else
    {
      ChPatternMixing = Translate("10000000");
      MixVolume1 = TotalVolume / (2 * 1.0);
      if (MixVolume1 > 1000)
      {
        MixVolume1 = 1000;
      }
    }
    Trace ("Volume per sample well:  ", var_VolPerSampleWell);
    Trace ("Mix volume, channel 1:  ", MixVolume1);
    Trace ("Mix volume, channel 2:  ", MixVolume2);
    arr_MixVols.SetSize(2);
    arr_MixVols.SetAt(1-1, MixVolume1);
    arr_MixVols.SetAt(2-1, MixVolume2);
    MECC::TraceComment(Translate("********* Premix in vial with 1 or 2 1ml Tips ***********"));
    onerror goto errLabel_19 ;
    err.Clear();
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    errLabel_19 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse1000ul);
    }   /* end if from skip handler if no error */
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    if (var_NumberOfSamples > 48)
    {
      NumberSamplesMoreThan48 = var_NumberOfSamples - 48;
      NumberSamplesUpTo48 = var_NumberOfSamples - (2 * NumberSamplesMoreThan48);
    }
    else
    {
      NumberSamplesMoreThan48 = 0;
      NumberSamplesUpTo48 = var_NumberOfSamples;
    }
    LabwareID_Vial = SeqGetLabwareId(seq_AspirationPosition);
    PositionID_Vial_1 = SeqGetPositionId(seq_AspirationPosition);
    SeqIncrement(seq_AspirationPosition, 1);
    PositionID_Vial_2 = SeqGetPositionId(seq_AspirationPosition);
    SeqRemoveAll(seq_AspirationPosition);
    {
      for(loopCounter2 = 0; loopCounter2 < NumberSamplesMoreThan48;)
      {
        loopCounter2 = loopCounter2 + 1;
        SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
        SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_2);
      }
    }
    {
      for(loopCounter2 = 0; loopCounter2 < NumberSamplesUpTo48;)
      {
        loopCounter2 = loopCounter2 + 1;
        SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
      }
    }
    seq_AspirationPosition.SetCurrentPosition(1);
    MECC::TraceComment(Translate("********** Now pipetting beads to destination plate"));
    {
      loopCounter1 = 0;
      while (
         (seq_DispensePosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_DispensePosition, 1, seq_TipsToUse50ul, 1, seq_AspirationPosition, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_20 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_20 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse50ul);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse50ul.SetMax(seq_TipsToUse50ul.GetTotal());
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetCurrentPosition(1);
      seq_AspirationPosition.SetCurrentPosition(1);
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_21[];
      variable _ColumnIdsArray_21[];
      variable _ColumnNamesArray_21[];
      variable _ExperimentsArray_21[];
      _FilterIdsArray_21.SetSize(0);
      _ColumnNamesArray_21.SetSize(14);
      _ColumnIdsArray_21.SetSize(14);
      _ColumnNamesArray_21.SetAt(0, "RecordId");
      _ColumnIdsArray_21.SetAt(0, 0);
      _ColumnNamesArray_21.SetAt(1, "TRackBC");
      _ColumnIdsArray_21.SetAt(1, 1);
      _ColumnNamesArray_21.SetAt(2, "TLabwareId");
      _ColumnIdsArray_21.SetAt(2, 2);
      _ColumnNamesArray_21.SetAt(3, "TPositionId");
      _ColumnIdsArray_21.SetAt(3, 3);
      _ColumnNamesArray_21.SetAt(4, "TPositionBC");
      _ColumnIdsArray_21.SetAt(4, 4);
      _ColumnNamesArray_21.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_21.SetAt(5, 5);
      _ColumnNamesArray_21.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_21.SetAt(6, 6);
      _ColumnNamesArray_21.SetAt(7, "TVolume");
      _ColumnIdsArray_21.SetAt(7, 7);
      _ColumnNamesArray_21.SetAt(8, "SRackBC");
      _ColumnIdsArray_21.SetAt(8, 8);
      _ColumnNamesArray_21.SetAt(9, "SLabwareId");
      _ColumnIdsArray_21.SetAt(9, 9);
      _ColumnNamesArray_21.SetAt(10, "SPositionId");
      _ColumnIdsArray_21.SetAt(10, 10);
      _ColumnNamesArray_21.SetAt(11, "SPositionBC");
      _ColumnIdsArray_21.SetAt(11, 11);
      _ColumnNamesArray_21.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_21.SetAt(12, 12);
      _ColumnNamesArray_21.SetAt(13, "UserName");
      _ColumnIdsArray_21.SetAt(13, 13);
      _ExperimentsArray_21.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_21, 0, _ColumnIdsArray_21, _ColumnNamesArray_21, _ExperimentsArray_21, "RRB_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_ReagentFromVial_wNewTips <<<<<<<<<<"));
  }

  function Add_ReagentFromHalfHeightVial( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse50ul, variable var_VolPerSampleWell, variable var_LiquidClass50F, variable var_RetractHeight_Disp, variable var_NumberOfVials ) void {
    private variable loopCounter1;
    private variable PositionID_Vial_1;
    private variable PositionID_Vial_2;
    private variable NumberSamplesMoreThan48;
    private variable loopCounter2;
    private variable LabwareID_Vial;
    private variable NumberSamplesUpTo48;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_ReagentFromHalfHeightVial <<<<<<<<<<"));
    if (var_NumberOfVials == 2)
    {
      if (var_NumberOfSamples > 48)
      {
        NumberSamplesMoreThan48 = var_NumberOfSamples - 48;
        NumberSamplesUpTo48 = var_NumberOfSamples - (2 * NumberSamplesMoreThan48);
      }
      else
      {
        NumberSamplesMoreThan48 = 0;
        NumberSamplesUpTo48 = var_NumberOfSamples;
      }
      LabwareID_Vial = SeqGetLabwareId(seq_AspirationPosition);
      PositionID_Vial_1 = SeqGetPositionId(seq_AspirationPosition);
      SeqIncrement(seq_AspirationPosition, 1);
      PositionID_Vial_2 = SeqGetPositionId(seq_AspirationPosition);
      SeqRemoveAll(seq_AspirationPosition);
      {
        for(loopCounter2 = 0; loopCounter2 < NumberSamplesMoreThan48;)
        {
          loopCounter2 = loopCounter2 + 1;
          SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
          SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_2);
        }
      }
      {
        for(loopCounter2 = 0; loopCounter2 < NumberSamplesUpTo48;)
        {
          loopCounter2 = loopCounter2 + 1;
          SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
        }
      }
    }
    else
    {
      LabwareID_Vial = SeqGetLabwareId(seq_AspirationPosition);
      PositionID_Vial_1 = SeqGetPositionId(seq_AspirationPosition);
      SeqRemoveAll(seq_AspirationPosition);
      {
        for(loopCounter2 = 0; loopCounter2 < var_NumberOfSamples;)
        {
          loopCounter2 = loopCounter2 + 1;
          SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
        }
      }
    }
    seq_AspirationPosition.SetCurrentPosition(1);
    Util2::Debug::TraceSequence(seq_AspirationPosition);
    MECC::TraceComment(Translate("********** Now pipetting reagent to destination plate"));
    {
      loopCounter1 = 0;
      while (
         (seq_DispensePosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_DispensePosition, 1, seq_TipsToUse50ul, 1, seq_AspirationPosition, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_22 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_22 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse50ul);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse50ul.SetMax(seq_TipsToUse50ul.GetTotal());
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetCurrentPosition(1);
      seq_AspirationPosition.SetCurrentPosition(1);
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_23[];
      variable _ColumnIdsArray_23[];
      variable _ColumnNamesArray_23[];
      variable _ExperimentsArray_23[];
      _FilterIdsArray_23.SetSize(0);
      _ColumnNamesArray_23.SetSize(14);
      _ColumnIdsArray_23.SetSize(14);
      _ColumnNamesArray_23.SetAt(0, "RecordId");
      _ColumnIdsArray_23.SetAt(0, 0);
      _ColumnNamesArray_23.SetAt(1, "TRackBC");
      _ColumnIdsArray_23.SetAt(1, 1);
      _ColumnNamesArray_23.SetAt(2, "TLabwareId");
      _ColumnIdsArray_23.SetAt(2, 2);
      _ColumnNamesArray_23.SetAt(3, "TPositionId");
      _ColumnIdsArray_23.SetAt(3, 3);
      _ColumnNamesArray_23.SetAt(4, "TPositionBC");
      _ColumnIdsArray_23.SetAt(4, 4);
      _ColumnNamesArray_23.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_23.SetAt(5, 5);
      _ColumnNamesArray_23.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_23.SetAt(6, 6);
      _ColumnNamesArray_23.SetAt(7, "TVolume");
      _ColumnIdsArray_23.SetAt(7, 7);
      _ColumnNamesArray_23.SetAt(8, "SRackBC");
      _ColumnIdsArray_23.SetAt(8, 8);
      _ColumnNamesArray_23.SetAt(9, "SLabwareId");
      _ColumnIdsArray_23.SetAt(9, 9);
      _ColumnNamesArray_23.SetAt(10, "SPositionId");
      _ColumnIdsArray_23.SetAt(10, 10);
      _ColumnNamesArray_23.SetAt(11, "SPositionBC");
      _ColumnIdsArray_23.SetAt(11, 11);
      _ColumnNamesArray_23.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_23.SetAt(12, 12);
      _ColumnNamesArray_23.SetAt(13, "UserName");
      _ColumnIdsArray_23.SetAt(13, 13);
      _ExperimentsArray_23.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_23, 0, _ColumnIdsArray_23, _ColumnNamesArray_23, _ExperimentsArray_23, "Reagent_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_ReagentFromHalfHeightVial <<<<<<<<<<"));
  }

  function Add_Oil( device & ML_STAR, sequence & seq_Tips50ul, sequence & seq_HSP, sequence & seq_Oil ) void {
    private variable loopCounter1;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_Oil <<<<<<<<<<"));
    {
      loopCounter1 = 0;
      while (
         (seq_HSP.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_Tips50ul, 1, seq_HSP, 1, seq_Oil, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_24 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_24 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_Tips50ul);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_HSP.GetCurrentPosition() > 0 && seq_HSP.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_Tips50ul.SetMax(seq_Tips50ul.GetTotal());
      seq_HSP.SetMax(seq_HSP.GetTotal());
      seq_Oil.SetMax(seq_Oil.GetTotal());
      seq_HSP.SetCurrentPosition(1);
      seq_Oil.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_Oil <<<<<<<<<<"));
  }

  function Add_BeadsFromVial( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse1000ul, sequence & seq_TipsToUse50ul, variable var_VolPerSampleWell, variable var_LiquidClass1ml_Premix, variable var_LiquidClass50F ) void {
    private variable MixVolume2;
    private variable PositionID_Vial_1;
    private variable PositionID_Vial_2;
    private variable NumberSamplesMoreThan48;
    private variable TotalVolume;
    private variable ChPatternMixing;
    private variable loopCounter1;
    private variable First48Volume;
    private variable loopCounter2;
    private variable RemainingVolume;
    private variable LabwareID_Vial;
    private variable NumberSamplesUpTo48;
    private variable MixVolume1;
    private variable arr_MixVols[];
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_BeadsFromVial <<<<<<<<<<"));
    TotalVolume = var_VolPerSampleWell * var_NumberOfSamples;
    if (var_NumberOfSamples > 48)
    {
      ChPatternMixing = Translate("11000000");
      First48Volume = var_VolPerSampleWell * 48;
      RemainingVolume = TotalVolume - First48Volume;
      MixVolume1 = First48Volume / (2 * 1.0);
      MixVolume2 = RemainingVolume / (2 * 1.0);
      if (MixVolume1 > 1000)
      {
        MixVolume1 = 1000;
      }
      if (MixVolume2 > 1000)
      {
        MixVolume2 = 1000;
      }
    }
    else
    {
      ChPatternMixing = Translate("10000000");
      MixVolume1 = TotalVolume / (2 * 1.0);
      if (MixVolume1 > 1000)
      {
        MixVolume1 = 1000;
      }
    }
    Trace ("Volume per sample well:  ", var_VolPerSampleWell);
    Trace ("Mix volume, channel 1:  ", MixVolume1);
    Trace ("Mix volume, channel 2:  ", MixVolume2);
    arr_MixVols.SetSize(2);
    arr_MixVols.SetAt(1-1, MixVolume1);
    arr_MixVols.SetAt(2-1, MixVolume2);
    MECC::TraceComment(Translate("********* Premix in vial with 1 or 2 1ml Tips ***********"));
    onerror goto errLabel_25 ;
    err.Clear();
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    errLabel_25 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse1000ul);
    }   /* end if from skip handler if no error */
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    if (var_NumberOfSamples > 48)
    {
      NumberSamplesMoreThan48 = var_NumberOfSamples - 48;
      NumberSamplesUpTo48 = var_NumberOfSamples - (2 * NumberSamplesMoreThan48);
    }
    else
    {
      NumberSamplesMoreThan48 = 0;
      NumberSamplesUpTo48 = var_NumberOfSamples;
    }
    LabwareID_Vial = SeqGetLabwareId(seq_AspirationPosition);
    PositionID_Vial_1 = SeqGetPositionId(seq_AspirationPosition);
    SeqIncrement(seq_AspirationPosition, 1);
    PositionID_Vial_2 = SeqGetPositionId(seq_AspirationPosition);
    SeqRemoveAll(seq_AspirationPosition);
    {
      for(loopCounter2 = 0; loopCounter2 < NumberSamplesMoreThan48;)
      {
        loopCounter2 = loopCounter2 + 1;
        SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
        SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_2);
      }
    }
    {
      for(loopCounter2 = 0; loopCounter2 < NumberSamplesUpTo48;)
      {
        loopCounter2 = loopCounter2 + 1;
        SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
      }
    }
    seq_AspirationPosition.SetCurrentPosition(1);
    MECC::TraceComment(Translate("********** Now pipetting beads to destination plate"));
    {
      loopCounter1 = 0;
      while (
         (seq_DispensePosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_DispensePosition, 1, seq_TipsToUse50ul, 1, seq_AspirationPosition, 1);
        loopCounter1 = loopCounter1 + 1;
        if (loopCounter1 == 1)
        {
          onerror goto errLabel_26 ;
          err.Clear();
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          errLabel_26 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse50ul);
          }   /* end if from skip handler if no error */
        }
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (
           (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse50ul.SetMax(seq_TipsToUse50ul.GetTotal());
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetCurrentPosition(1);
      seq_AspirationPosition.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_21[];
      variable _ColumnIdsArray_21[];
      variable _ColumnNamesArray_21[];
      variable _ExperimentsArray_21[];
      _FilterIdsArray_21.SetSize(0);
      _ColumnNamesArray_21.SetSize(14);
      _ColumnIdsArray_21.SetSize(14);
      _ColumnNamesArray_21.SetAt(0, "RecordId");
      _ColumnIdsArray_21.SetAt(0, 0);
      _ColumnNamesArray_21.SetAt(1, "TRackBC");
      _ColumnIdsArray_21.SetAt(1, 1);
      _ColumnNamesArray_21.SetAt(2, "TLabwareId");
      _ColumnIdsArray_21.SetAt(2, 2);
      _ColumnNamesArray_21.SetAt(3, "TPositionId");
      _ColumnIdsArray_21.SetAt(3, 3);
      _ColumnNamesArray_21.SetAt(4, "TPositionBC");
      _ColumnIdsArray_21.SetAt(4, 4);
      _ColumnNamesArray_21.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_21.SetAt(5, 5);
      _ColumnNamesArray_21.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_21.SetAt(6, 6);
      _ColumnNamesArray_21.SetAt(7, "TVolume");
      _ColumnIdsArray_21.SetAt(7, 7);
      _ColumnNamesArray_21.SetAt(8, "SRackBC");
      _ColumnIdsArray_21.SetAt(8, 8);
      _ColumnNamesArray_21.SetAt(9, "SLabwareId");
      _ColumnIdsArray_21.SetAt(9, 9);
      _ColumnNamesArray_21.SetAt(10, "SPositionId");
      _ColumnIdsArray_21.SetAt(10, 10);
      _ColumnNamesArray_21.SetAt(11, "SPositionBC");
      _ColumnIdsArray_21.SetAt(11, 11);
      _ColumnNamesArray_21.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_21.SetAt(12, 12);
      _ColumnNamesArray_21.SetAt(13, "UserName");
      _ColumnIdsArray_21.SetAt(13, 13);
      _ExperimentsArray_21.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_21, 0, _ColumnIdsArray_21, _ColumnNamesArray_21, _ExperimentsArray_21, "RRB_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_ReagentFromVial <<<<<<<<<<"));
  }

  function Add_Control_1TubeOnly( device & ML_STAR, variable var_NumberOfSamples, variable var_UseControl, sequence & seq_AspirationPosition, sequence & seq_ResuspensionBuffer, sequence & seq_DispensePosition, sequence & seq_TipsToUse50ul, variable var_VolPerSampleWell, variable var_LiquidClass50F ) void {
    private variable PositionID_Vial_1;
    private variable loopCounter1;
    private variable LabwareID_Vial;
    private variable loopCounter2;
    private sequence seq_PipetteReagentFrom;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_Control <<<<<<<<<<"));
    if (var_UseControl == 1)
    {
      LabwareID_Vial = SeqGetLabwareId(seq_AspirationPosition);
      PositionID_Vial_1 = SeqGetPositionId(seq_AspirationPosition);
      SeqRemoveAll(seq_AspirationPosition);
      {
        for(loopCounter2 = 0; loopCounter2 < var_NumberOfSamples;)
        {
          loopCounter2 = loopCounter2 + 1;
          SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
        }
      }
      seq_AspirationPosition.SetCurrentPosition(1);
      SeqOperatorAssignSeq(seq_PipetteReagentFrom, seq_AspirationPosition);
    }
    else
    {
      SeqOperatorAssignSeq(seq_PipetteReagentFrom, seq_ResuspensionBuffer);
    }
    MECC::TraceComment(Translate("********** Now pipetting reagent to destination plate"));
    {
      loopCounter1 = 0;
      while (
         (seq_DispensePosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_DispensePosition, 1, seq_PipetteReagentFrom, 1, seq_TipsToUse50ul, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_27 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_27 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse50ul);
        }   /* end if from skip handler if no error */
        if (var_UseControl == 1)
        {
          MECC::TraceComment(Translate("***********************************************************************************\n******************************* Pipetting Control  *******************************\n************************************************************************************"));
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          MECC::TraceComment(Translate("***********************************************************************************\n********************* Pipetting Buffer **********************\n************************************************************************************"));
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_PipetteReagentFrom.SetMax(seq_PipetteReagentFrom.GetTotal());
      seq_TipsToUse50ul.SetMax(seq_TipsToUse50ul.GetTotal());
      seq_DispensePosition.SetCurrentPosition(1);
      seq_PipetteReagentFrom.SetCurrentPosition(1);
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_PipetteReagentFrom);
    {
      variable _FilterIdsArray_12[];
      variable _ColumnIdsArray_12[];
      variable _ColumnNamesArray_12[];
      variable _ExperimentsArray_12[];
      _FilterIdsArray_12.SetSize(0);
      _ColumnNamesArray_12.SetSize(14);
      _ColumnIdsArray_12.SetSize(14);
      _ColumnNamesArray_12.SetAt(0, "RecordId");
      _ColumnIdsArray_12.SetAt(0, 0);
      _ColumnNamesArray_12.SetAt(1, "TRackBC");
      _ColumnIdsArray_12.SetAt(1, 1);
      _ColumnNamesArray_12.SetAt(2, "TLabwareId");
      _ColumnIdsArray_12.SetAt(2, 2);
      _ColumnNamesArray_12.SetAt(3, "TPositionId");
      _ColumnIdsArray_12.SetAt(3, 3);
      _ColumnNamesArray_12.SetAt(4, "TPositionBC");
      _ColumnIdsArray_12.SetAt(4, 4);
      _ColumnNamesArray_12.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_12.SetAt(5, 5);
      _ColumnNamesArray_12.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_12.SetAt(6, 6);
      _ColumnNamesArray_12.SetAt(7, "TVolume");
      _ColumnIdsArray_12.SetAt(7, 7);
      _ColumnNamesArray_12.SetAt(8, "SRackBC");
      _ColumnIdsArray_12.SetAt(8, 8);
      _ColumnNamesArray_12.SetAt(9, "SLabwareId");
      _ColumnIdsArray_12.SetAt(9, 9);
      _ColumnNamesArray_12.SetAt(10, "SPositionId");
      _ColumnIdsArray_12.SetAt(10, 10);
      _ColumnNamesArray_12.SetAt(11, "SPositionBC");
      _ColumnIdsArray_12.SetAt(11, 11);
      _ColumnNamesArray_12.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_12.SetAt(12, 12);
      _ColumnNamesArray_12.SetAt(13, "UserName");
      _ColumnIdsArray_12.SetAt(13, 13);
      _ExperimentsArray_12.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_12, 0, _ColumnIdsArray_12, _ColumnNamesArray_12, _ExperimentsArray_12, "Control_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_Control <<<<<<<<<<"));
  }

  function Add_Ethanol( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_TipsToUse1000ul, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_LiquidClassEthanol, variable & var_TrackingEthanolVolume ) void {
    private variable VolumeToAspirate_8channels_mL;
    private variable AspVolume_Ethanol;
    private variable ret_MeasuredVol_Ch1;
    private variable NumberOfColumns;
    private variable VolAsp8ch_mL_inclDeadVol;
    private variable VolumeToAspirate;
    private variable MixCycles;
    private variable ActualIncubationDuration;
    private variable Vol_Ch1;
    private variable VolumeToAspirate_8channels_uL;
    private variable loopCounter3;
    private variable loopCounter4;
    private variable SimOn;
    private timer Incubate30sec;
    private variable AspVolume_Ethanol1;
    private variable AspVolume_Ethanol2;
    private variable AspVolume_Ethanol3;
    private variable NumberOfDispenses1;
    private variable NumberOfDispenses2;
    private variable NumberOfDispenses3;
    private variable NumberOfDispenses;
    private variable NumberOfAspirations;
    private variable ret_PositionsEthanol;
    private variable Pointer_EthanolSequence;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_Ethanol <<<<<<<<<<"));
    NumberOfCompleteColumns = var_NumberOfSamples / 8;
    RemainingWells = var_NumberOfSamples % 8;
    Trace ("Number of Complete Columns in Destination Plate:  ", NumberOfCompleteColumns);
    Trace ("Number of Wells in Last, Incomplete Column:  ", RemainingWells);
    if (RemainingWells > 0)
    {
      NumberOfColumns = NumberOfCompleteColumns + 1;
    }
    else
    {
      NumberOfColumns = NumberOfCompleteColumns;
    }
    AspVolume_Ethanol = 200 * NumberOfColumns;
    Trace ("Required Total Volume for Ethanol, Per Row, Max = ", AspVolume_Ethanol);
    if (AspVolume_Ethanol <= 1000)
    {
      NumberOfAspirations = 1;
      NumberOfDispenses1 = NumberOfColumns;
      AspVolume_Ethanol1 = AspVolume_Ethanol;
    }
    else
    {
      NumberOfAspirations = AspVolume_Ethanol / (1000 * 1.0);
      NumberOfAspirations = MthCeiling(NumberOfAspirations);
      NumberOfDispenses1 = 5;
      NumberOfDispenses2 = NumberOfColumns - NumberOfDispenses1;
      if (NumberOfDispenses2 > 5)
      {
        NumberOfDispenses3 = NumberOfDispenses2 - 5;
        NumberOfDispenses2 = 5;
      }
      AspVolume_Ethanol1 = 200 * NumberOfDispenses1;
      AspVolume_Ethanol2 = 200 * NumberOfDispenses2;
      AspVolume_Ethanol3 = 200 * NumberOfDispenses3;
    }
    Trace ("Number of Aspirations:  ", NumberOfAspirations);
    Trace ("Number of Columns for the first set of dispenses:  ", NumberOfDispenses1);
    Trace ("Number of Columns for the second set of dispenses:  ", NumberOfDispenses2);
    Trace ("Number of Columns for the third set of dispenses:  ", NumberOfDispenses3);
    Trace ("Aspiration volume for the first set of dispenses:  ", AspVolume_Ethanol1);
    Trace ("Aspiration volume for the second set of dispenses:  ", AspVolume_Ethanol2);
    Trace ("Aspiration volume for the third set of dispenses:  ", AspVolume_Ethanol3);
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
    {
      loopCounter4 = 0;
      while (
         (seq_DispensePosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_TipsToUse1000ul, 1);
        loopCounter4 = loopCounter4 + 1;
        if (loopCounter4 == 1)
        {
          onerror goto errLabel_28 ;
          err.Clear();
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          errLabel_28 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse1000ul);
          }   /* end if from skip handler if no error */
          VolumeToAspirate = AspVolume_Ethanol1;
          NumberOfDispenses = NumberOfDispenses1;
          MixCycles = 1;
        }
        if (loopCounter4 == 2)
        {
          VolumeToAspirate = AspVolume_Ethanol2;
          NumberOfDispenses = NumberOfDispenses2;
          MixCycles = 0;
        }
        if (loopCounter4 == 3)
        {
          VolumeToAspirate = AspVolume_Ethanol3;
          NumberOfDispenses = NumberOfDispenses3;
          MixCycles = 0;
        }
        MECC::TraceComment(Translate("Need to determine if there is enough liquid in the tub for the next aspiration step. "));
        Trace (">>> Expected ethanol volume in tub:  ", var_TrackingEthanolVolume);
        if (var_TrackingEthanolVolume <= 0)
        {
          MECC::TraceComment(Translate("At the start of a run, or if going to a new or refilled tub, the volume is unknown, so we have to measure it:"));
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ret_MeasuredVol_Ch1 = HSLML_STAR::MeasureContainerVolume2(ML_STAR, seq_AspirationPosition, 0, Translate("10000000"), 0, 0, 0);
          Vol_Ch1 = HSLML_STAR::GetContainerVolume(1);
          var_TrackingEthanolVolume = Vol_Ch1;
          SimOn = HSLML_STAR::IsSimulatorMode(ML_STAR);
          if (SimOn == 1)
          {
            var_TrackingEthanolVolume = 12;
          }
          Trace (">>> After the cLLD check, the ethanol volume in tub is:  ", var_TrackingEthanolVolume);
        }
        VolumeToAspirate_8channels_uL = VolumeToAspirate * 8;
        VolumeToAspirate_8channels_mL = VolumeToAspirate_8channels_uL / (1000 * 1.0);
        VolAsp8ch_mL_inclDeadVol = VolumeToAspirate_8channels_mL + 2;
        Trace (">>> Next step needs this volume in tube (mL), including dead volume:  ", VolAsp8ch_mL_inclDeadVol);
        if (VolAsp8ch_mL_inclDeadVol > var_TrackingEthanolVolume)
        {
          MECC::TraceComment(Translate("***** Insufficient volume of ethanol in tub.  Go to next tub, if available. *****"));
          var_TrackingEthanolVolume = 0;
          ret_PositionsEthanol = SeqGetTotal(seq_AspirationPosition);
          if (ret_PositionsEthanol >= 16)
          {
            Pointer_EthanolSequence = seq_AspirationPosition.GetCurrentPosition();
            if (Pointer_EthanolSequence <= 9)
            {
              SeqIncrement(seq_AspirationPosition, 8);
              MECC::TraceComment(Translate("***** Sequence incremented.  Going to next tub. Need to measure volume in tub. *****"));
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              ret_MeasuredVol_Ch1 = HSLML_STAR::MeasureContainerVolume2(ML_STAR, seq_AspirationPosition, 0, Translate("10000000"), 0, 0, 0);
              Vol_Ch1 = HSLML_STAR::GetContainerVolume(1);
              var_TrackingEthanolVolume = Vol_Ch1;
              SimOn = HSLML_STAR::IsSimulatorMode(ML_STAR);
              if (SimOn == 1)
              {
                var_TrackingEthanolVolume = 12;
              }
              Trace ("After the cLLD check, the ethanol volume in tub is:  ", var_TrackingEthanolVolume);
              if (VolAsp8ch_mL_inclDeadVol > var_TrackingEthanolVolume)
              {
                MECC::TraceComment(Translate("***** INADEQUATE VOLUME IN NEW TUB.  ASPIRATE STEP WILL LIKELY RESULT IN ERROR, REQUIRING USER INTERVENTION.  *****"));
              }
            }
            else
            {
              MECC::TraceComment(Translate("***** Sequence not incremented.  No other tubs available.  *****\n***** ASPIRATE STEP WILL LIKELY RESULT IN ERROR, REQUIRING USER INTERVENTION. *****"));
            }
          }
          else
          {
            MECC::TraceComment(Translate("***** Sequence not incremented.  No other tubs available.  *****\n***** ASPIRATE STEP WILL LIKELY RESULT IN ERROR, REQUIRING USER INTERVENTION. *****"));
          }
        }
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        var_TrackingEthanolVolume = var_TrackingEthanolVolume - VolumeToAspirate_8channels_mL;
        Trace ("New, calculated ethanol volume in tub:  ", var_TrackingEthanolVolume);
        {
          for(loopCounter3 = 0; loopCounter3 < NumberOfDispenses;)
          {
            loopCounter3 = loopCounter3 + 1;
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
        }
        if (loopCounter4 == 1)
        {
          if( 0 == Incubate30sec.SetTimer(23) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        if (
           (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse1000ul.SetMax(seq_TipsToUse1000ul.GetTotal());
      seq_DispensePosition.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_29[];
      variable _ColumnIdsArray_29[];
      variable _ColumnNamesArray_29[];
      variable _ExperimentsArray_29[];
      _FilterIdsArray_29.SetSize(0);
      _ColumnNamesArray_29.SetSize(14);
      _ColumnIdsArray_29.SetSize(14);
      _ColumnNamesArray_29.SetAt(0, "RecordId");
      _ColumnIdsArray_29.SetAt(0, 0);
      _ColumnNamesArray_29.SetAt(1, "TRackBC");
      _ColumnIdsArray_29.SetAt(1, 1);
      _ColumnNamesArray_29.SetAt(2, "TLabwareId");
      _ColumnIdsArray_29.SetAt(2, 2);
      _ColumnNamesArray_29.SetAt(3, "TPositionId");
      _ColumnIdsArray_29.SetAt(3, 3);
      _ColumnNamesArray_29.SetAt(4, "TPositionBC");
      _ColumnIdsArray_29.SetAt(4, 4);
      _ColumnNamesArray_29.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_29.SetAt(5, 5);
      _ColumnNamesArray_29.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_29.SetAt(6, 6);
      _ColumnNamesArray_29.SetAt(7, "TVolume");
      _ColumnIdsArray_29.SetAt(7, 7);
      _ColumnNamesArray_29.SetAt(8, "SRackBC");
      _ColumnIdsArray_29.SetAt(8, 8);
      _ColumnNamesArray_29.SetAt(9, "SLabwareId");
      _ColumnIdsArray_29.SetAt(9, 9);
      _ColumnNamesArray_29.SetAt(10, "SPositionId");
      _ColumnIdsArray_29.SetAt(10, 10);
      _ColumnNamesArray_29.SetAt(11, "SPositionBC");
      _ColumnIdsArray_29.SetAt(11, 11);
      _ColumnNamesArray_29.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_29.SetAt(12, 12);
      _ColumnNamesArray_29.SetAt(13, "UserName");
      _ColumnIdsArray_29.SetAt(13, 13);
      _ExperimentsArray_29.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_29, 0, _ColumnIdsArray_29, _ColumnNamesArray_29, _ExperimentsArray_29, "Ethanol_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    seq_DispensePosition.SetCurrentPosition(1);
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    if( 0 == Incubate30sec.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    ActualIncubationDuration = Incubate30sec.GetElapsedTime();
    Trace ("***** Actual incubation time (expected minimum 30 seconds for first column of wells):  ", ActualIncubationDuration);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_Ethanol <<<<<<<<<<"));
  }

  function Remove_ResidualSupernatant( device & ML_STAR, sequence & seq_TipsToUse50ul, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_VolumeToTransfer, variable var_LiquidClass ) void {
    private variable loopCounter1;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Remove_ResidualSupernatant <<<<<<<<<<"));
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
    {
      loopCounter1 = 0;
      while (
         (seq_AspirationPosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_TipsToUse50ul, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_30 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_30 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse50ul);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_AspirationPosition.GetCurrentPosition() > 0 && seq_AspirationPosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse50ul.SetMax(seq_TipsToUse50ul.GetTotal());
      seq_AspirationPosition.SetCurrentPosition(1);
      seq_DispensePosition.SetCurrentPosition(1);
    }
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_31[];
      variable _ColumnIdsArray_31[];
      variable _ColumnNamesArray_31[];
      variable _ExperimentsArray_31[];
      _FilterIdsArray_31.SetSize(0);
      _ColumnNamesArray_31.SetSize(14);
      _ColumnIdsArray_31.SetSize(14);
      _ColumnNamesArray_31.SetAt(0, "RecordId");
      _ColumnIdsArray_31.SetAt(0, 0);
      _ColumnNamesArray_31.SetAt(1, "TRackBC");
      _ColumnIdsArray_31.SetAt(1, 1);
      _ColumnNamesArray_31.SetAt(2, "TLabwareId");
      _ColumnIdsArray_31.SetAt(2, 2);
      _ColumnNamesArray_31.SetAt(3, "TPositionId");
      _ColumnIdsArray_31.SetAt(3, 3);
      _ColumnNamesArray_31.SetAt(4, "TPositionBC");
      _ColumnIdsArray_31.SetAt(4, 4);
      _ColumnNamesArray_31.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_31.SetAt(5, 5);
      _ColumnNamesArray_31.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_31.SetAt(6, 6);
      _ColumnNamesArray_31.SetAt(7, "TVolume");
      _ColumnIdsArray_31.SetAt(7, 7);
      _ColumnNamesArray_31.SetAt(8, "SRackBC");
      _ColumnIdsArray_31.SetAt(8, 8);
      _ColumnNamesArray_31.SetAt(9, "SLabwareId");
      _ColumnIdsArray_31.SetAt(9, 9);
      _ColumnNamesArray_31.SetAt(10, "SPositionId");
      _ColumnIdsArray_31.SetAt(10, 10);
      _ColumnNamesArray_31.SetAt(11, "SPositionBC");
      _ColumnIdsArray_31.SetAt(11, 11);
      _ColumnNamesArray_31.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_31.SetAt(12, 12);
      _ColumnNamesArray_31.SetAt(13, "UserName");
      _ColumnIdsArray_31.SetAt(13, 13);
      _ExperimentsArray_31.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_31, 0, _ColumnIdsArray_31, _ColumnNamesArray_31, _ExperimentsArray_31, "TransferToWaste_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Remove_ResidualSupernatant <<<<<<<<<<"));
  }

  function Read_NormFile( device & ML_STAR, variable var_NormalizationFile, variable & var_TotalBufferVolume, variable & var_NumberOfSamples ) void {
    private variable LinesInTheFile;
    private variable BufferVolume;
    private variable WellID_Pool;
    private variable WellID_Source;
    private file file1;
    private variable Answer_WarningVolume;
    private variable var_TotalBufferVolume_uL;
    private dialog dialogHandle_32;
    private variable SampleConc;
    var_TotalBufferVolume = 0;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Read_NormFile <<<<<<<<<<"));
    MECC::TraceComment(Translate("Get the values from the Normalization File.  \nAssumptions:\nThe File must be a comma separated txt or csv file. \nThe file must have at least 2 columns, headed by \"SourceWell\" and \"Volume\" (buffer volume)\nThe volume of buffer required per well must be less than or equal to 600.\n\n"));
    file1.AddField("SourceWell", WellID_Source, hslString, 255);
    file1.AddField("nM", SampleConc, hslFloat);
    file1.AddField("PoolWell", WellID_Pool, hslString, 255);
    if( 0 == file1.Open(var_NormalizationFile + " " + "Sheet1$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, var_NormalizationFile, "HxMetEdCompCmd");
    }
    var_TotalBufferVolume_uL = 0;
    {
      LinesInTheFile = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        LinesInTheFile = LinesInTheFile + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        BufferVolume = SampleConc - 10;
        BufferVolume = MthRound(BufferVolume, 1);
        Trace ("Source well ", WellID_Source, ", Concentration (nM) = ", SampleConc, ", so Buffer Volume is ", BufferVolume, "ul.");
        var_TotalBufferVolume_uL = var_TotalBufferVolume_uL + BufferVolume;
        if (BufferVolume > 600)
        {
          dialogHandle_32.SetOutput(Translate("Well:  "), WellID_Source, Translate("\n\nThis sample requires a diluent volume greater than 600ul."), Translate("\n\nClick Yes to continue, and the system will pipette 600ul buffer for this sample.  Or click No to Abort."));
          Answer_WarningVolume = dialogHandle_32.ShowOutput(Translate("Warning!"), hslYesNo | hslExclamation | hslDefButton2, hslInfinite);
          if (Answer_WarningVolume == 6)
          {
            BufferVolume = 600;
            Trace ("WARNING!  For source well ", WellID_Source, ", ", BufferVolume, "ul total buffer will be pipetted.");
          }
          else
          {
            abort;
          }
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    var_NumberOfSamples = LinesInTheFile;
    var_TotalBufferVolume = var_TotalBufferVolume_uL / 1000;
    var_TotalBufferVolume = MthCeiling(var_TotalBufferVolume);
    Trace ("Total Buffer Volume (mL) = ", var_TotalBufferVolume);
    Trace ("Number of samples = ", var_NumberOfSamples);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Read_NormFile <<<<<<<<<<"));
  }

  function Add_AmpureSingle( device & ML_STAR, sequence & seq_AmpureBeads, sequence & seq_Destination, sequence & seq_Tips, variable var_NumberSamples, variable var_BeadVolumePerWell, variable var_LLD_On, variable var_TipUsage ) void {
    private variable MixVolume_Beads;
    private variable MixCycles_Beads;
    private variable loopCounter2;
    private variable FixedHt_Dispense;
    private variable LC_Beads;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_AmpureSingle <<<<<<<<<<"));
    Trace ("Volume of AMPure XP Beads per well:  ", var_BeadVolumePerWell);
    if (var_LLD_On == 0)
    {
      MECC::TraceComment(Translate("*** cLLD off for the dispense ***"));
      FixedHt_Dispense = 0.2;
    }
    else
    {
      MECC::TraceComment(Translate("*** cLLD on for the dispense ***"));
      FixedHt_Dispense = 0;
    }
    MECC::TraceComment(Translate("********** Fill plate with AMPure XP Beads ..........."));
    {
      loopCounter2 = 0;
      while (
         (seq_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AmpureBeads, 1, seq_Destination, 1, seq_Tips, 1);
        loopCounter2 = loopCounter2 + 1;
        if (loopCounter2 == 1)
        {
          MixVolume_Beads = 300;
          MixCycles_Beads = 5;
        }
        else
        {
          if (var_TipUsage == 1)
          {
            MixVolume_Beads = var_BeadVolumePerWell;
            MixCycles_Beads = 1;
          }
          else
          {
            MixVolume_Beads = 0;
            MixCycles_Beads = 0;
          }
        }
        if (var_TipUsage == 1)
        {
          onerror goto errLabel_33 ;
          err.Clear();
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          errLabel_33 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            ErrorHandling_TipPickup(ML_STAR, seq_Tips);
          }   /* end if from skip handler if no error */
        }
        else
        {
          if (loopCounter2 == 1)
          {
            onerror goto errLabel_34 ;
            err.Clear();
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            errLabel_34 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              ErrorHandling_TipPickup(ML_STAR, seq_Tips);
            }   /* end if from skip handler if no error */
          }
        }
        LC_Beads = Translate("NexteraXT_SVF_AMPure_SurfaceEmpty");
        if(0){
          if (loopCounter2 == 1)
          {
            LC_Beads = Translate("TruSeq_SVF_Ampure_Surface_Empty_FastMix");
          }
          else
          {
            LC_Beads = Translate("TruSeq_SVF_Ampure_Surface_Empty");
          }
        }
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (var_TipUsage == 1)
        {
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
        if (
           (seq_Destination.GetCurrentPosition() > 0 && seq_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AmpureBeads.SetMax(seq_AmpureBeads.GetTotal());
      seq_Destination.SetMax(seq_Destination.GetTotal());
      seq_Tips.SetMax(seq_Tips.GetTotal());
      seq_AmpureBeads.SetCurrentPosition(1);
      seq_Destination.SetCurrentPosition(1);
    }
    if (var_TipUsage == 0)
    {
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AmpureBeads);
    {
      variable _FilterIdsArray_35[];
      variable _ColumnIdsArray_35[];
      variable _ColumnNamesArray_35[];
      variable _ExperimentsArray_35[];
      _FilterIdsArray_35.SetSize(0);
      _ColumnNamesArray_35.SetSize(14);
      _ColumnIdsArray_35.SetSize(14);
      _ColumnNamesArray_35.SetAt(0, "RecordId");
      _ColumnIdsArray_35.SetAt(0, 0);
      _ColumnNamesArray_35.SetAt(1, "TRackBC");
      _ColumnIdsArray_35.SetAt(1, 1);
      _ColumnNamesArray_35.SetAt(2, "TLabwareId");
      _ColumnIdsArray_35.SetAt(2, 2);
      _ColumnNamesArray_35.SetAt(3, "TPositionId");
      _ColumnIdsArray_35.SetAt(3, 3);
      _ColumnNamesArray_35.SetAt(4, "TPositionBC");
      _ColumnIdsArray_35.SetAt(4, 4);
      _ColumnNamesArray_35.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_35.SetAt(5, 5);
      _ColumnNamesArray_35.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_35.SetAt(6, 6);
      _ColumnNamesArray_35.SetAt(7, "TVolume");
      _ColumnIdsArray_35.SetAt(7, 7);
      _ColumnNamesArray_35.SetAt(8, "SRackBC");
      _ColumnIdsArray_35.SetAt(8, 8);
      _ColumnNamesArray_35.SetAt(9, "SLabwareId");
      _ColumnIdsArray_35.SetAt(9, 9);
      _ColumnNamesArray_35.SetAt(10, "SPositionId");
      _ColumnIdsArray_35.SetAt(10, 10);
      _ColumnNamesArray_35.SetAt(11, "SPositionBC");
      _ColumnIdsArray_35.SetAt(11, 11);
      _ColumnNamesArray_35.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_35.SetAt(12, 12);
      _ColumnNamesArray_35.SetAt(13, "UserName");
      _ColumnIdsArray_35.SetAt(13, 13);
      _ExperimentsArray_35.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_Destination, 3, _FilterIdsArray_35, 0, _ColumnIdsArray_35, _ColumnNamesArray_35, _ExperimentsArray_35, "AMPureBeads_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_AmpureSingle <<<<<<<<<<"));
  }

  function Add_AmpureMulti( device & ML_STAR, sequence & seq_AmpureBeads, sequence & seq_Destination, sequence & seq_Tips, variable var_NumberSamples, variable var_BeadVolumePerWell ) void {
    private variable MixVolume_Beads;
    private variable NumberOfRemainingWells;
    private variable NumberOfAliquots;
    private variable NumberOfColumns;
    private variable NumberOfDispenses1;
    private variable AspVolume_Beads1;
    private variable NumberOfDispenses2;
    private variable AspVolume_Beads2;
    private variable loopCounter2;
    private variable loopCounter3;
    private variable NumberOfAliquotsPerAsp1;
    private variable NumberOfAliquotsPerAsp2;
    private variable NumberOfDispenses;
    private variable AspVolume_Beads;
    private variable NumberOfAspirations;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_AmpureMulti <<<<<<<<<<"));
    Trace ("Volume of AMPure XP Beads per well:  ", var_BeadVolumePerWell);
    NumberOfCompleteColumns = var_NumberSamples / 8;
    NumberOfRemainingWells = var_NumberSamples % 8;
    if (NumberOfRemainingWells > 0)
    {
      NumberOfColumns = NumberOfCompleteColumns + 1;
    }
    else
    {
      NumberOfColumns = NumberOfCompleteColumns;
    }
    NumberOfAliquots = NumberOfColumns + 2;
    AspVolume_Beads = var_BeadVolumePerWell * NumberOfAliquots;
    Trace ("Aspiration Volume for AMPure XP Beads, Per Row, Max = ", AspVolume_Beads);
    if (AspVolume_Beads <= 1000)
    {
      NumberOfAspirations = 1;
      NumberOfDispenses1 = NumberOfColumns;
      AspVolume_Beads1 = AspVolume_Beads;
    }
    else
    {
      NumberOfAspirations = AspVolume_Beads / (1000 * 1.0);
      NumberOfAspirations = MthCeiling(NumberOfAspirations);
      NumberOfDispenses = NumberOfColumns / (NumberOfAspirations * 1.0);
      NumberOfDispenses1 = MthCeiling(NumberOfDispenses);
      NumberOfDispenses2 = NumberOfColumns - NumberOfDispenses1;
      NumberOfAliquotsPerAsp1 = NumberOfDispenses1 + 2;
      NumberOfAliquotsPerAsp2 = NumberOfDispenses2 + 2;
      AspVolume_Beads1 = var_BeadVolumePerWell * NumberOfAliquotsPerAsp1;
      AspVolume_Beads2 = var_BeadVolumePerWell * NumberOfAliquotsPerAsp2;
    }
    MixVolume_Beads = AspVolume_Beads1;
    if (MixVolume_Beads < 250)
    {
      MixVolume_Beads = 250;
    }
    if (AspVolume_Beads >= 1000)
    {
      MixVolume_Beads = 1000;
    }
    Trace ("Number of Aspirations:  ", NumberOfAspirations);
    Trace ("Number of Columns for the first set of dispenses:  ", NumberOfDispenses1);
    Trace ("Number of Columns for the second set of dispenses:  ", NumberOfDispenses2);
    Trace ("Aspiration volume for the first set of dispenses:  ", AspVolume_Beads1);
    Trace ("Aspiration volume for the second set of dispenses:  ", AspVolume_Beads2);
    Trace ("Pre-Mix volume for first aspiration:  ", MixVolume_Beads);
    Trace ("Pre-Mix volume for second aspiration:  ", AspVolume_Beads2);
    MECC::TraceComment(Translate("********** Fill plate with AMPure XP Beads ..........."));
    {
      loopCounter2 = 0;
      while (
         (seq_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AmpureBeads, 1, seq_Destination, 1, seq_Tips, 1);
        loopCounter2 = loopCounter2 + 1;
        if (loopCounter2 == 1)
        {
          onerror goto errLabel_36 ;
          err.Clear();
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          errLabel_36 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            ErrorHandling_TipPickup(ML_STAR, seq_Tips);
          }   /* end if from skip handler if no error */
          AspVolume_Beads = AspVolume_Beads1;
          NumberOfDispenses = NumberOfDispenses1;
        }
        else
        {
          AspVolume_Beads = AspVolume_Beads2;
          NumberOfDispenses = NumberOfDispenses2;
          MixVolume_Beads = AspVolume_Beads2;
        }
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        {
          for(loopCounter3 = 0; loopCounter3 < NumberOfDispenses;)
          {
            loopCounter3 = loopCounter3 + 1;
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
        }
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (
           (seq_Destination.GetCurrentPosition() > 0 && seq_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AmpureBeads.SetMax(seq_AmpureBeads.GetTotal());
      seq_Destination.SetMax(seq_Destination.GetTotal());
      seq_Tips.SetMax(seq_Tips.GetTotal());
      seq_AmpureBeads.SetCurrentPosition(1);
      seq_Destination.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AmpureBeads);
    {
      variable _FilterIdsArray_35[];
      variable _ColumnIdsArray_35[];
      variable _ColumnNamesArray_35[];
      variable _ExperimentsArray_35[];
      _FilterIdsArray_35.SetSize(0);
      _ColumnNamesArray_35.SetSize(14);
      _ColumnIdsArray_35.SetSize(14);
      _ColumnNamesArray_35.SetAt(0, "RecordId");
      _ColumnIdsArray_35.SetAt(0, 0);
      _ColumnNamesArray_35.SetAt(1, "TRackBC");
      _ColumnIdsArray_35.SetAt(1, 1);
      _ColumnNamesArray_35.SetAt(2, "TLabwareId");
      _ColumnIdsArray_35.SetAt(2, 2);
      _ColumnNamesArray_35.SetAt(3, "TPositionId");
      _ColumnIdsArray_35.SetAt(3, 3);
      _ColumnNamesArray_35.SetAt(4, "TPositionBC");
      _ColumnIdsArray_35.SetAt(4, 4);
      _ColumnNamesArray_35.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_35.SetAt(5, 5);
      _ColumnNamesArray_35.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_35.SetAt(6, 6);
      _ColumnNamesArray_35.SetAt(7, "TVolume");
      _ColumnIdsArray_35.SetAt(7, 7);
      _ColumnNamesArray_35.SetAt(8, "SRackBC");
      _ColumnIdsArray_35.SetAt(8, 8);
      _ColumnNamesArray_35.SetAt(9, "SLabwareId");
      _ColumnIdsArray_35.SetAt(9, 9);
      _ColumnNamesArray_35.SetAt(10, "SPositionId");
      _ColumnIdsArray_35.SetAt(10, 10);
      _ColumnNamesArray_35.SetAt(11, "SPositionBC");
      _ColumnIdsArray_35.SetAt(11, 11);
      _ColumnNamesArray_35.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_35.SetAt(12, 12);
      _ColumnNamesArray_35.SetAt(13, "UserName");
      _ColumnIdsArray_35.SetAt(13, 13);
      _ExperimentsArray_35.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_Destination, 3, _FilterIdsArray_35, 0, _ColumnIdsArray_35, _ColumnNamesArray_35, _ExperimentsArray_35, "AMPureBeads_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_AmpureMulti <<<<<<<<<<"));
  }

  private function Move_MIDI_wCOREgrippers( device & ML_STAR, sequence & seq_MIDI_Source, sequence & seq_MIDI_Destination, sequence seq_CORE_Grippers, variable var_TrackToReadBC, variable var_ParkAfterMove ) void {
    private variable GripWidth;
    private variable ret_DestinationLabwareID;
    private variable GripOpening;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Move_MIDI_wCOREgrippers <<<<<<<<<<"));
    MECC::TraceComment(Translate("Using CORE grippers for MIDI movements"));
    GripWidth = 79;
    GripOpening = 87;
    ret_DestinationLabwareID = SeqGetLabwareId(seq_MIDI_Destination);
    if (ret_DestinationLabwareID == "MIDI_Waste")
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, seq_MIDI_Source, -20, 0, 0);
      VIRTUALLABWARE::MoveSeq(ML_STAR, seq_MIDI_Destination, -60, 0, 8);
    }
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    if (var_TrackToReadBC > 0)
    {
      if(0){
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      }
      ML_STAR._E59329BC_113D_451D_9468_F2327ECEE33E("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"); // ZSwapReadBarcode
    }
    if (var_ParkAfterMove == 1)
    {
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    }
    else
    {
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    }
    if (ret_DestinationLabwareID == "MIDI_Waste")
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, seq_MIDI_Source, 20, 0, 0);
      VIRTUALLABWARE::MoveSeq(ML_STAR, seq_MIDI_Destination, 60, 0, -8);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Move_MIDI_wCOREgrippers <<<<<<<<<<"));
  }

  private function Move_HSP_wCOREgrippers( device & ML_STAR, sequence & seq_HSP_StartingPosition, sequence & seq_HSP_Destination, sequence seq_CORE_Grippers, variable var_TrackToReadBC, variable var_ParkAfterMove ) void {
    private variable ret_DestinationLabwareID;
    private variable ret_SourceLabwareID;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod: Move_HSP_wCOREgrippers <<<<<<<<<"));
    MECC::TraceComment(Translate("Using CORE grippers for HSP movements"));
    ret_SourceLabwareID = SeqGetLabwareId(seq_HSP_StartingPosition);
    ret_SourceLabwareID = StrLeft(ret_SourceLabwareID, 15);
    ret_DestinationLabwareID = SeqGetLabwareId(seq_HSP_Destination);
    if (ret_SourceLabwareID == "Hardshell_Stack")
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, seq_HSP_StartingPosition, 0, 0, 54.5);
    }
    if (ret_DestinationLabwareID == "HSP_Waste")
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, seq_HSP_StartingPosition, -20, 0, 0);
      VIRTUALLABWARE::MoveSeq(ML_STAR, seq_HSP_Destination, -60, 0, 0);
    }
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    if (var_TrackToReadBC > 0)
    {
      ML_STAR._E59329BC_113D_451D_9468_F2327ECEE33E("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"); // ZSwapReadBarcode
    }
    if (var_ParkAfterMove == 1)
    {
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    }
    else
    {
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    }
    if (ret_DestinationLabwareID == "HSP_Waste")
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, seq_HSP_StartingPosition, 20, 0, 0);
      VIRTUALLABWARE::MoveSeq(ML_STAR, seq_HSP_Destination, 60, 0, 0);
    }
    if (ret_SourceLabwareID == "Hardshell_Stack")
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, seq_HSP_StartingPosition, 0, 0, -54.5);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Move_HSP_wCOREgrippers <<<<<<<<<<"));
  }

  function Add_BeadsFromVial_96samples_per_vial( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse1000ul, sequence & seq_TipsToUse50ul, variable var_VolPerSampleWell, variable var_LiquidClass1ml_Premix, variable var_LiquidClass50F ) void {
    private variable MixVolume2;
    private variable PositionID_Vial_1;
    private variable TotalVolume;
    private variable ChPatternMixing;
    private variable loopCounter1;
    private variable First48Volume;
    private variable LabwareID_Vial;
    private variable loopCounter2;
    private variable RemainingVolume;
    private variable MixVolume1;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_BeadsFromVial <<<<<<<<<<"));
    TotalVolume = var_VolPerSampleWell * var_NumberOfSamples;
    if (var_NumberOfSamples > 96)
    {
      ChPatternMixing = Translate("11000000");
      First48Volume = var_VolPerSampleWell * 48;
      RemainingVolume = TotalVolume - First48Volume;
      MixVolume1 = First48Volume / (2 * 1.0);
      MixVolume2 = RemainingVolume / (2 * 1.0);
      if (MixVolume1 > 1000)
      {
        MixVolume1 = 1000;
      }
      if (MixVolume2 > 1000)
      {
        MixVolume2 = 1000;
      }
    }
    else
    {
      ChPatternMixing = Translate("10000000");
      MixVolume1 = TotalVolume / (2 * 1.0);
      if (MixVolume1 > 1000)
      {
        MixVolume1 = 1000;
      }
    }
    Trace ("Volume per sample well:  ", var_VolPerSampleWell);
    Trace ("Mix volume, channel 1:  ", MixVolume1);
    MECC::TraceComment(Translate("********* Premix in vial with 1 or 2 1ml Tips ***********"));
    onerror goto errLabel_37 ;
    err.Clear();
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    errLabel_37 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse1000ul);
    }   /* end if from skip handler if no error */
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    LabwareID_Vial = SeqGetLabwareId(seq_AspirationPosition);
    PositionID_Vial_1 = SeqGetPositionId(seq_AspirationPosition);
    SeqRemoveAll(seq_AspirationPosition);
    {
      for(loopCounter2 = 0; loopCounter2 < var_NumberOfSamples;)
      {
        loopCounter2 = loopCounter2 + 1;
        SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
      }
    }
    seq_AspirationPosition.SetCurrentPosition(1);
    MECC::TraceComment(Translate("********** Now pipetting beads to destination plate"));
    {
      loopCounter1 = 0;
      while (
         (seq_DispensePosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_DispensePosition, 1, seq_TipsToUse50ul, 1, seq_AspirationPosition, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_38 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_38 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse50ul);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse50ul.SetMax(seq_TipsToUse50ul.GetTotal());
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetCurrentPosition(1);
      seq_AspirationPosition.SetCurrentPosition(1);
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_21[];
      variable _ColumnIdsArray_21[];
      variable _ColumnNamesArray_21[];
      variable _ExperimentsArray_21[];
      _FilterIdsArray_21.SetSize(0);
      _ColumnNamesArray_21.SetSize(14);
      _ColumnIdsArray_21.SetSize(14);
      _ColumnNamesArray_21.SetAt(0, "RecordId");
      _ColumnIdsArray_21.SetAt(0, 0);
      _ColumnNamesArray_21.SetAt(1, "TRackBC");
      _ColumnIdsArray_21.SetAt(1, 1);
      _ColumnNamesArray_21.SetAt(2, "TLabwareId");
      _ColumnIdsArray_21.SetAt(2, 2);
      _ColumnNamesArray_21.SetAt(3, "TPositionId");
      _ColumnIdsArray_21.SetAt(3, 3);
      _ColumnNamesArray_21.SetAt(4, "TPositionBC");
      _ColumnIdsArray_21.SetAt(4, 4);
      _ColumnNamesArray_21.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_21.SetAt(5, 5);
      _ColumnNamesArray_21.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_21.SetAt(6, 6);
      _ColumnNamesArray_21.SetAt(7, "TVolume");
      _ColumnIdsArray_21.SetAt(7, 7);
      _ColumnNamesArray_21.SetAt(8, "SRackBC");
      _ColumnIdsArray_21.SetAt(8, 8);
      _ColumnNamesArray_21.SetAt(9, "SLabwareId");
      _ColumnIdsArray_21.SetAt(9, 9);
      _ColumnNamesArray_21.SetAt(10, "SPositionId");
      _ColumnIdsArray_21.SetAt(10, 10);
      _ColumnNamesArray_21.SetAt(11, "SPositionBC");
      _ColumnIdsArray_21.SetAt(11, 11);
      _ColumnNamesArray_21.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_21.SetAt(12, 12);
      _ColumnNamesArray_21.SetAt(13, "UserName");
      _ColumnIdsArray_21.SetAt(13, 13);
      _ExperimentsArray_21.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_21, 0, _ColumnIdsArray_21, _ColumnNamesArray_21, _ExperimentsArray_21, "RRB_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_ReagentFromVial <<<<<<<<<<"));
  }

  function Shake_ParallelProcessing( device & ML_STAR, variable var_HHS_ID, variable var_Speed, variable var_ShakingDuration, variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse50ul, variable var_VolPerSampleWell, variable var_LiquidClass50F, variable var_RetractHeight, variable var_NumberOfVials ) void {
    private variable PositionID_Vial_1;
    private variable PositionID_Vial_2;
    private variable NumberSamplesMoreThan48;
    private variable loopCounter1;
    private variable loopCounter2;
    private variable LabwareID_Vial;
    private variable NumberSamplesUpTo48;
    private variable ActualShakingDuration;
    private variable CheckForEarlyStop;
    private timer Shaking;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Shake_ParallelProcessing <<<<<<<<<<"));
    if (var_NumberOfVials == 2)
    {
      if (var_NumberOfSamples > 48)
      {
        NumberSamplesMoreThan48 = var_NumberOfSamples - 48;
        NumberSamplesUpTo48 = var_NumberOfSamples - (2 * NumberSamplesMoreThan48);
      }
      else
      {
        NumberSamplesMoreThan48 = 0;
        NumberSamplesUpTo48 = var_NumberOfSamples;
      }
      LabwareID_Vial = SeqGetLabwareId(seq_AspirationPosition);
      PositionID_Vial_1 = SeqGetPositionId(seq_AspirationPosition);
      SeqIncrement(seq_AspirationPosition, 1);
      PositionID_Vial_2 = SeqGetPositionId(seq_AspirationPosition);
      SeqRemoveAll(seq_AspirationPosition);
      {
        for(loopCounter2 = 0; loopCounter2 < NumberSamplesMoreThan48;)
        {
          loopCounter2 = loopCounter2 + 1;
          SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
          SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_2);
        }
      }
      {
        for(loopCounter2 = 0; loopCounter2 < NumberSamplesUpTo48;)
        {
          loopCounter2 = loopCounter2 + 1;
          SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
        }
      }
    }
    else
    {
      LabwareID_Vial = SeqGetLabwareId(seq_AspirationPosition);
      PositionID_Vial_1 = SeqGetPositionId(seq_AspirationPosition);
      SeqRemoveAll(seq_AspirationPosition);
      {
        for(loopCounter2 = 0; loopCounter2 < var_NumberOfSamples;)
        {
          loopCounter2 = loopCounter2 + 1;
          SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
        }
      }
    }
    seq_AspirationPosition.SetCurrentPosition(1);
    Util2::Debug::TraceSequence(seq_AspirationPosition);
    Trace ("***** Now shaking on HHS", var_HHS_ID, " at ", var_Speed, "rpm for ", var_ShakingDuration, "seconds...");
    HSLHamHeaterShaker::StartShaker(var_HHS_ID, var_Speed);
    if( 0 == Shaking.SetTimer(var_ShakingDuration) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("********** Now pipetting reagent to destination plate"));
    onerror goto errLabel_39 ;
    err.Clear();
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    errLabel_39 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse50ul);
    }   /* end if from skip handler if no error */
    {
      loopCounter1 = 0;
      while (
         (seq_DispensePosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_DispensePosition, 1, seq_TipsToUse50ul, 1, seq_AspirationPosition, 1);
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (
           (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse50ul.SetMax(seq_TipsToUse50ul.GetTotal());
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetCurrentPosition(1);
      seq_AspirationPosition.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    CheckForEarlyStop = Shaking.WaitTimer(hslTrue, hslTrue);
    if (0 == CheckForEarlyStop)
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (CheckForEarlyStop == 3)
    {
      MECC::TraceComment(Translate("***** WARNING!  The shaking was stopped prematurely by the operator! *****"));
    }
    ActualShakingDuration = Shaking.GetElapsedTime();
    Trace ("***** Actual Shaking Duration (seconds):  ", ActualShakingDuration);
    HSLHamHeaterShaker::StopShaker(var_HHS_ID);
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_10[];
      variable _ColumnIdsArray_10[];
      variable _ColumnNamesArray_10[];
      variable _ExperimentsArray_10[];
      _FilterIdsArray_10.SetSize(0);
      _ColumnNamesArray_10.SetSize(14);
      _ColumnIdsArray_10.SetSize(14);
      _ColumnNamesArray_10.SetAt(0, "RecordId");
      _ColumnIdsArray_10.SetAt(0, 0);
      _ColumnNamesArray_10.SetAt(1, "TRackBC");
      _ColumnIdsArray_10.SetAt(1, 1);
      _ColumnNamesArray_10.SetAt(2, "TLabwareId");
      _ColumnIdsArray_10.SetAt(2, 2);
      _ColumnNamesArray_10.SetAt(3, "TPositionId");
      _ColumnIdsArray_10.SetAt(3, 3);
      _ColumnNamesArray_10.SetAt(4, "TPositionBC");
      _ColumnIdsArray_10.SetAt(4, 4);
      _ColumnNamesArray_10.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_10.SetAt(5, 5);
      _ColumnNamesArray_10.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_10.SetAt(6, 6);
      _ColumnNamesArray_10.SetAt(7, "TVolume");
      _ColumnIdsArray_10.SetAt(7, 7);
      _ColumnNamesArray_10.SetAt(8, "SRackBC");
      _ColumnIdsArray_10.SetAt(8, 8);
      _ColumnNamesArray_10.SetAt(9, "SLabwareId");
      _ColumnIdsArray_10.SetAt(9, 9);
      _ColumnNamesArray_10.SetAt(10, "SPositionId");
      _ColumnIdsArray_10.SetAt(10, 10);
      _ColumnNamesArray_10.SetAt(11, "SPositionBC");
      _ColumnIdsArray_10.SetAt(11, 11);
      _ColumnNamesArray_10.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_10.SetAt(12, 12);
      _ColumnNamesArray_10.SetAt(13, "UserName");
      _ColumnIdsArray_10.SetAt(13, 13);
      _ExperimentsArray_10.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_10, 0, _ColumnIdsArray_10, _ColumnNamesArray_10, _ExperimentsArray_10, "Reagent_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Shake_ParallelProcessing <<<<<<<<<<"));
  }

  function Add_WashBuffer( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse, variable var_VolPerSampleWell, variable var_LiquidClass50F, variable var_RetractHeight ) void {
    private variable PositionID_Vial_1;
    private variable PositionID_Vial_2;
    private variable NumberSamplesMoreThan48;
    private variable loopCounter1;
    private variable LabwareID_Vial;
    private variable loopCounter2;
    private variable NumberSamplesUpTo48;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_EWS <<<<<<<<<<"));
    if (var_NumberOfSamples > 48)
    {
      NumberSamplesMoreThan48 = var_NumberOfSamples - 48;
      NumberSamplesUpTo48 = var_NumberOfSamples - (2 * NumberSamplesMoreThan48);
    }
    else
    {
      NumberSamplesMoreThan48 = 0;
      NumberSamplesUpTo48 = var_NumberOfSamples;
    }
    LabwareID_Vial = SeqGetLabwareId(seq_AspirationPosition);
    PositionID_Vial_1 = SeqGetPositionId(seq_AspirationPosition);
    SeqIncrement(seq_AspirationPosition, 1);
    PositionID_Vial_2 = SeqGetPositionId(seq_AspirationPosition);
    SeqRemoveAll(seq_AspirationPosition);
    {
      for(loopCounter2 = 0; loopCounter2 < NumberSamplesMoreThan48;)
      {
        loopCounter2 = loopCounter2 + 1;
        SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
        SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_2);
      }
    }
    {
      for(loopCounter2 = 0; loopCounter2 < NumberSamplesUpTo48;)
      {
        loopCounter2 = loopCounter2 + 1;
        SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
      }
    }
    seq_AspirationPosition.SetCurrentPosition(1);
    MECC::TraceComment(Translate("********** Now pipetting reagent to destination plate"));
    {
      loopCounter1 = 0;
      while (
         (seq_DispensePosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_TipsToUse, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_40 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_40 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse.SetMax(seq_TipsToUse.GetTotal());
      seq_AspirationPosition.SetCurrentPosition(1);
      seq_DispensePosition.SetCurrentPosition(1);
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_10[];
      variable _ColumnIdsArray_10[];
      variable _ColumnNamesArray_10[];
      variable _ExperimentsArray_10[];
      _FilterIdsArray_10.SetSize(0);
      _ColumnNamesArray_10.SetSize(14);
      _ColumnIdsArray_10.SetSize(14);
      _ColumnNamesArray_10.SetAt(0, "RecordId");
      _ColumnIdsArray_10.SetAt(0, 0);
      _ColumnNamesArray_10.SetAt(1, "TRackBC");
      _ColumnIdsArray_10.SetAt(1, 1);
      _ColumnNamesArray_10.SetAt(2, "TLabwareId");
      _ColumnIdsArray_10.SetAt(2, 2);
      _ColumnNamesArray_10.SetAt(3, "TPositionId");
      _ColumnIdsArray_10.SetAt(3, 3);
      _ColumnNamesArray_10.SetAt(4, "TPositionBC");
      _ColumnIdsArray_10.SetAt(4, 4);
      _ColumnNamesArray_10.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_10.SetAt(5, 5);
      _ColumnNamesArray_10.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_10.SetAt(6, 6);
      _ColumnNamesArray_10.SetAt(7, "TVolume");
      _ColumnIdsArray_10.SetAt(7, 7);
      _ColumnNamesArray_10.SetAt(8, "SRackBC");
      _ColumnIdsArray_10.SetAt(8, 8);
      _ColumnNamesArray_10.SetAt(9, "SLabwareId");
      _ColumnIdsArray_10.SetAt(9, 9);
      _ColumnNamesArray_10.SetAt(10, "SPositionId");
      _ColumnIdsArray_10.SetAt(10, 10);
      _ColumnNamesArray_10.SetAt(11, "SPositionBC");
      _ColumnIdsArray_10.SetAt(11, 11);
      _ColumnNamesArray_10.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_10.SetAt(12, 12);
      _ColumnNamesArray_10.SetAt(13, "UserName");
      _ColumnIdsArray_10.SetAt(13, 13);
      _ExperimentsArray_10.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_10, 0, _ColumnIdsArray_10, _ColumnNamesArray_10, _ExperimentsArray_10, "Reagent_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_EWS <<<<<<<<<<"));
  }

  function Add_RSBFromVial_4Vials( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse50ul, variable var_VolPerSampleWell, variable var_LiquidClass50F, variable var_RetractHeight ) void {
    private variable loopCounter7;
    private variable NumberSamplesMoreThan24;
    private variable loopCounter8;
    private variable PositionID_Vial_1;
    private variable loopCounter9;
    private variable PositionID_Vial_2;
    private variable NumberSamplesMoreThan48;
    private variable PositionID_Vial_3;
    private variable PositionID_Vial_4;
    private variable NumberSamplesUpTo72;
    private variable loopCounter1;
    private variable NumberSamplesUpTo24;
    private variable NumberSamplesMoreThan72;
    private variable LabwareID_Vial;
    private variable NumberSamplesUpTo48;
    private variable loopCounter3;
    private variable loopCounter4;
    private variable loopCounter5;
    private variable loopCounter6;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_ReagentFromVial_4Vials <<<<<<<<<<"));
    LabwareID_Vial = SeqGetLabwareId(seq_AspirationPosition);
    PositionID_Vial_1 = SeqGetPositionId(seq_AspirationPosition);
    SeqIncrement(seq_AspirationPosition, 1);
    PositionID_Vial_2 = SeqGetPositionId(seq_AspirationPosition);
    SeqIncrement(seq_AspirationPosition, 1);
    PositionID_Vial_3 = SeqGetPositionId(seq_AspirationPosition);
    SeqIncrement(seq_AspirationPosition, 1);
    PositionID_Vial_4 = SeqGetPositionId(seq_AspirationPosition);
    SeqRemoveAll(seq_AspirationPosition);
    if (var_NumberOfSamples > 72)
    {
      NumberSamplesMoreThan72 = var_NumberOfSamples - 72;
      NumberSamplesUpTo72 = (var_NumberOfSamples - (4 * NumberSamplesMoreThan72)) / 3;
      {
        for(loopCounter3 = 0; loopCounter3 < NumberSamplesMoreThan72;)
        {
          loopCounter3 = loopCounter3 + 1;
          SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
          SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_2);
          SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_3);
          SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_4);
        }
      }
      {
        for(loopCounter4 = 0; loopCounter4 < NumberSamplesUpTo72;)
        {
          loopCounter4 = loopCounter4 + 1;
          SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
          SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_2);
          SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_3);
        }
      }
    }
    else
    {
      if (var_NumberOfSamples > 48)
      {
        NumberSamplesMoreThan48 = var_NumberOfSamples - 48;
        NumberSamplesUpTo48 = (var_NumberOfSamples - (3 * NumberSamplesMoreThan48)) / 2;
        {
          for(loopCounter5 = 0; loopCounter5 < NumberSamplesMoreThan48;)
          {
            loopCounter5 = loopCounter5 + 1;
            SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
            SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_2);
            SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_3);
          }
        }
        {
          for(loopCounter6 = 0; loopCounter6 < NumberSamplesUpTo48;)
          {
            loopCounter6 = loopCounter6 + 1;
            SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
            SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_2);
          }
        }
      }
      else
      {
        if (var_NumberOfSamples > 24)
        {
          NumberSamplesMoreThan24 = var_NumberOfSamples - 24;
          NumberSamplesUpTo24 = var_NumberOfSamples - (2 * NumberSamplesMoreThan24);
          {
            for(loopCounter7 = 0; loopCounter7 < NumberSamplesMoreThan24;)
            {
              loopCounter7 = loopCounter7 + 1;
              SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
              SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_2);
            }
          }
          {
            for(loopCounter8 = 0; loopCounter8 < NumberSamplesUpTo24;)
            {
              loopCounter8 = loopCounter8 + 1;
              SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
            }
          }
        }
        else
        {
          {
            for(loopCounter9 = 0; loopCounter9 < var_NumberOfSamples;)
            {
              loopCounter9 = loopCounter9 + 1;
              SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
            }
          }
        }
      }
    }
    seq_AspirationPosition.SetCurrentPosition(1);
    Util2::Debug::TraceSequence(seq_AspirationPosition);
    MECC::TraceComment(Translate("********** Now pipetting reagent to destination plate"));
    {
      loopCounter1 = 0;
      while (
         (seq_DispensePosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_DispensePosition, 1, seq_TipsToUse50ul, 1, seq_AspirationPosition, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_41 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_41 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse50ul);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse50ul.SetMax(seq_TipsToUse50ul.GetTotal());
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetCurrentPosition(1);
      seq_AspirationPosition.SetCurrentPosition(1);
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_10[];
      variable _ColumnIdsArray_10[];
      variable _ColumnNamesArray_10[];
      variable _ExperimentsArray_10[];
      _FilterIdsArray_10.SetSize(0);
      _ColumnNamesArray_10.SetSize(14);
      _ColumnIdsArray_10.SetSize(14);
      _ColumnNamesArray_10.SetAt(0, "RecordId");
      _ColumnIdsArray_10.SetAt(0, 0);
      _ColumnNamesArray_10.SetAt(1, "TRackBC");
      _ColumnIdsArray_10.SetAt(1, 1);
      _ColumnNamesArray_10.SetAt(2, "TLabwareId");
      _ColumnIdsArray_10.SetAt(2, 2);
      _ColumnNamesArray_10.SetAt(3, "TPositionId");
      _ColumnIdsArray_10.SetAt(3, 3);
      _ColumnNamesArray_10.SetAt(4, "TPositionBC");
      _ColumnIdsArray_10.SetAt(4, 4);
      _ColumnNamesArray_10.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_10.SetAt(5, 5);
      _ColumnNamesArray_10.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_10.SetAt(6, 6);
      _ColumnNamesArray_10.SetAt(7, "TVolume");
      _ColumnIdsArray_10.SetAt(7, 7);
      _ColumnNamesArray_10.SetAt(8, "SRackBC");
      _ColumnIdsArray_10.SetAt(8, 8);
      _ColumnNamesArray_10.SetAt(9, "SLabwareId");
      _ColumnIdsArray_10.SetAt(9, 9);
      _ColumnNamesArray_10.SetAt(10, "SPositionId");
      _ColumnIdsArray_10.SetAt(10, 10);
      _ColumnNamesArray_10.SetAt(11, "SPositionBC");
      _ColumnIdsArray_10.SetAt(11, 11);
      _ColumnNamesArray_10.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_10.SetAt(12, 12);
      _ColumnNamesArray_10.SetAt(13, "UserName");
      _ColumnIdsArray_10.SetAt(13, 13);
      _ExperimentsArray_10.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_10, 0, _ColumnIdsArray_10, _ColumnNamesArray_10, _ExperimentsArray_10, "Reagent_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_ReagentFromVial_4Vials <<<<<<<<<<"));
  }

  function ErrorHandling_TipPickup( device & ML_STAR, sequence & seq_TipsToUse ) void {
    private dialog dialogHandle_42;
    private dialog customDialog_43;
    private dialog dialogHandle_44;
    private dialog customDialog_45;
    private variable ret_AbortMethod;
    private variable loopCounter_ChannelsNoTips;
    private variable var_DialogBoxString;
    private variable ret_ReloadTips;
    private variable channelIndex;
    private variable flag_SkipToNextTipRack;
    private variable var_TipSequenceCurrentPosition;
    private variable var_NumberChannelsWithNoTips;
    private variable var_PickupPattern;
    private variable var_NumberTipsRemaining;
    private variable var_NoTipChannelString;
    private variable firmwareReturn;
    private variable var_Channel;
    private variable var_TipPickupPattern;
    private variable isTipPresent;
    private variable ret_RetryNextTipRack;
    private variable var_TipSequenceEndPosition;
    private variable Labware_ID;
    private variable Tip_Counter;
    private variable SimOn;
    private variable firmwareCommand;
    private variable arr_ChannelsNoTip[];
    MECC::TraceComment(Translate("START TIP PICKUP ERROR HANDLING"));
    SimOn = HSLML_STAR::IsSimulatorMode(ML_STAR);
    if (SimOn == 0)
    {
      var_PickupPattern = Translate("");
      arr_ChannelsNoTip.SetSize(0);
      {
        for(channelIndex = 0; channelIndex < 8;)
        {
          channelIndex = channelIndex + 1;
          firmwareCommand = StrConcat4(Translate("P"), channelIndex, Translate("RW"), Translate(""));
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
            	firmwareReturn = arrRetValues[3];
          }
          isTipPresent = StrMid(firmwareReturn, 5, 1);
          if (isTipPresent == "1")
          {
            var_TipPickupPattern = Translate("0");
          }
          else
          {
            var_TipPickupPattern = Translate("1");
            arr_ChannelsNoTip.AddAsLast(channelIndex);
          }
          var_PickupPattern = var_PickupPattern + var_TipPickupPattern;
        }
      }
      var_NumberChannelsWithNoTips=arr_ChannelsNoTip.GetSize();
      var_NoTipChannelString = Translate("");
      {
        for(loopCounter_ChannelsNoTips = 0; loopCounter_ChannelsNoTips < var_NumberChannelsWithNoTips;)
        {
          loopCounter_ChannelsNoTips = loopCounter_ChannelsNoTips + 1;
          var_Channel=arr_ChannelsNoTip.GetAt(loopCounter_ChannelsNoTips-1);
          var_Channel = StrIStr(var_Channel);
          if (loopCounter_ChannelsNoTips != 1)
          {
            var_Channel = StrConcat2(Translate(", "), var_Channel);
          }
          var_NoTipChannelString = var_NoTipChannelString + var_Channel;
        }
      }
      var_TipSequenceCurrentPosition = seq_TipsToUse.GetCurrentPosition();
      var_TipSequenceEndPosition = seq_TipsToUse.GetCount();
      var_NumberTipsRemaining = var_TipSequenceEndPosition - var_TipSequenceCurrentPosition;
      var_NumberTipsRemaining = var_NumberTipsRemaining + 1;
      flag_SkipToNextTipRack = 1;
      if (var_NumberTipsRemaining <= 96)
      {
        flag_SkipToNextTipRack = 0;
      }
      var_DialogBoxString = StrConcat4(Translate("Channel(s) "), var_NoTipChannelString, Translate(" were not able to pick up the requested tip type."), Translate(""));
      customDialog_45.InitCustomDialog("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");
      customDialog_45.SetCustomDialogProperty( "radioButton2.IsEnabled", flag_SkipToNextTipRack );
      customDialog_45.ShowCustomDialog();
      ret_AbortMethod = customDialog_45.GetCustomDialogProperty( "ReturnValue" );
      ret_ReloadTips = customDialog_45.GetCustomDialogProperty( "radioButton1.IsChecked" );
      ret_RetryNextTipRack = customDialog_45.GetCustomDialogProperty( "radioButton2.IsChecked" );
      if (ret_AbortMethod == 2)
      {
        abort;
      }
      Labware_ID = SeqGetLabwareId(seq_TipsToUse);
      Labware_ID = StrLeft(Labware_ID, 3);
      if (Labware_ID == "TIP")
      {
        Tip_Counter = Translate("TruSeq_50F_Counter");
      }
      if (Labware_ID == "stf")
      {
        Tip_Counter = Translate("TruSeq_SVF_Counter");
      }
      if (Labware_ID == "HTF")
      {
        Tip_Counter = Translate("TruSeq_HVF_Counter");
      }
      if (ret_ReloadTips == 1)
      {
        PTL::ResetUnloadingStateAndSequences();
        PTL::SetUnloadingState("UserResponseTime", 0);
        PTL::SetUnloadingState("ErrorHandling", 3);
        PTL::SetUnloadingSize(1);
        PTL::SetUnloadingSequence(0, seq_TipsToUse, hslFalse, "");
        if( 0 == PTL::Unload(ML_STAR) )
        {
              PTL::RaiseRuntimeError(-1540095744, PTL::IDS::smartStepUnload, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
        PTL::GetUnloadingSequence(0, seq_TipsToUse);
        customDialog_43.InitCustomDialog("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");
        customDialog_43.ShowCustomDialog();
        PTL::ResetLoadingStateAndSequences();
        PTL::SetLoadingState("UserResponseTime", hslInfinite);
        PTL::SetLoadingState("ErrorHandling", 3);
        PTL::SetLoadingState("CalibrateCarrierChannel", -1);
        PTL::SetLoadingSize(1);
        PTL::SetLoadingSequence(0, seq_TipsToUse, 1, -10, hslTrue, hslTrue, Tip_Counter);
        if( 0 == PTL::Load(ML_STAR, hslTrue) )
        {
              PTL::RaiseRuntimeError(-1556872960, PTL::IDS::smartStepLoad, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
        PTL::GetLoadingSequence(0, seq_TipsToUse);
        ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
        onerror goto errLabel_46 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_46 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          dialogHandle_42.SetOutput(Translate("The instrument is still having trouble picking up tips."), Translate("\n\nThe method will now abort."), Translate("\n\nIf this issue persists, please contact Hamilton Service."));
          dialogHandle_42.ShowOutput(Translate("Error Picking Up Tips"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          abort;
        }   /* end if from skip handler if no error */
      }
      if (ret_RetryNextTipRack == 1)
      {
        if (var_TipSequenceCurrentPosition <= 96)
        {
          seq_TipsToUse.SetCurrentPosition(97);
        }
        else
        {
          if (var_TipSequenceCurrentPosition <= 192)
          {
            seq_TipsToUse.SetCurrentPosition(193);
          }
          else
          {
            if (var_TipSequenceCurrentPosition <= 288)
            {
              seq_TipsToUse.SetCurrentPosition(289);
            }
            else
            {
              if (var_TipSequenceCurrentPosition <= 384)
              {
                seq_TipsToUse.SetCurrentPosition(385);
              }
              else
              {
                if (var_TipSequenceCurrentPosition <= 480)
                {
                  seq_TipsToUse.SetCurrentPosition(481);
                }
                else
                {
                  if (var_TipSequenceCurrentPosition <= 576)
                  {
                    seq_TipsToUse.SetCurrentPosition(577);
                  }
                  else
                  {
                    if (var_TipSequenceCurrentPosition <= 672)
                    {
                      seq_TipsToUse.SetCurrentPosition(673);
                    }
                    else
                    {
                      if (var_TipSequenceCurrentPosition <= 768)
                      {
                        seq_TipsToUse.SetCurrentPosition(769);
                      }
                      else
                      {
                        if (var_TipSequenceCurrentPosition <= 864)
                        {
                        seq_TipsToUse.SetCurrentPosition(865);
                        }
                      }
                    }
                  }
                }
              }
            }
          }
        }
        onerror goto errLabel_47 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_47 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          dialogHandle_44.SetOutput(Translate("The instrument is still having trouble picking up tips."), Translate("\n\nThe method will now abort."), Translate("\n\nIf this issue persists, please contact Hamilton Service."));
          dialogHandle_44.ShowOutput(Translate("Error Picking Up Tips"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          abort;
        }   /* end if from skip handler if no error */
      }
    }
    MECC::TraceComment(Translate("END TIP PICKUP ERROR HANDLING"));
  }

  function Add_NaOH( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse, variable var_VolPerSampleWell, variable var_RetractHeight ) void {
    private variable loopCounter1;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_NaOH <<<<<<<<<<"));
    {
      loopCounter1 = 0;
      while (
         (seq_DispensePosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_TipsToUse, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_48 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_48 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse.SetMax(seq_TipsToUse.GetTotal());
      seq_AspirationPosition.SetCurrentPosition(1);
      seq_DispensePosition.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("******** Create mapping files ********"));
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_49[];
      variable _ColumnIdsArray_49[];
      variable _ColumnNamesArray_49[];
      variable _ExperimentsArray_49[];
      _FilterIdsArray_49.SetSize(0);
      _ColumnNamesArray_49.SetSize(14);
      _ColumnIdsArray_49.SetSize(14);
      _ColumnNamesArray_49.SetAt(0, "RecordId");
      _ColumnIdsArray_49.SetAt(0, 0);
      _ColumnNamesArray_49.SetAt(1, "TRackBC");
      _ColumnIdsArray_49.SetAt(1, 1);
      _ColumnNamesArray_49.SetAt(2, "TLabwareId");
      _ColumnIdsArray_49.SetAt(2, 2);
      _ColumnNamesArray_49.SetAt(3, "TPositionId");
      _ColumnIdsArray_49.SetAt(3, 3);
      _ColumnNamesArray_49.SetAt(4, "TPositionBC");
      _ColumnIdsArray_49.SetAt(4, 4);
      _ColumnNamesArray_49.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_49.SetAt(5, 5);
      _ColumnNamesArray_49.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_49.SetAt(6, 6);
      _ColumnNamesArray_49.SetAt(7, "TVolume");
      _ColumnIdsArray_49.SetAt(7, 7);
      _ColumnNamesArray_49.SetAt(8, "SRackBC");
      _ColumnIdsArray_49.SetAt(8, 8);
      _ColumnNamesArray_49.SetAt(9, "SLabwareId");
      _ColumnIdsArray_49.SetAt(9, 9);
      _ColumnNamesArray_49.SetAt(10, "SPositionId");
      _ColumnIdsArray_49.SetAt(10, 10);
      _ColumnNamesArray_49.SetAt(11, "SPositionBC");
      _ColumnIdsArray_49.SetAt(11, 11);
      _ColumnNamesArray_49.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_49.SetAt(12, 12);
      _ColumnNamesArray_49.SetAt(13, "UserName");
      _ColumnIdsArray_49.SetAt(13, 13);
      _ExperimentsArray_49.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_49, 0, _ColumnIdsArray_49, _ColumnNamesArray_49, _ExperimentsArray_49, "<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_NaOH <<<<<<<<<<"));
  }

  function Pool( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse, variable var_VolPerSampleWell, variable var_RetractHeight ) void {
    private variable loopCounter1;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Pool <<<<<<<<<<"));
    {
      loopCounter1 = 0;
      while (
         (seq_AspirationPosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_TipsToUse, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_50 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_50 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_AspirationPosition.GetCurrentPosition() > 0 && seq_AspirationPosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse.SetMax(seq_TipsToUse.GetTotal());
      seq_AspirationPosition.SetCurrentPosition(1);
      seq_DispensePosition.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("******** Create mapping files ********"));
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_49[];
      variable _ColumnIdsArray_49[];
      variable _ColumnNamesArray_49[];
      variable _ExperimentsArray_49[];
      _FilterIdsArray_49.SetSize(0);
      _ColumnNamesArray_49.SetSize(14);
      _ColumnIdsArray_49.SetSize(14);
      _ColumnNamesArray_49.SetAt(0, "RecordId");
      _ColumnIdsArray_49.SetAt(0, 0);
      _ColumnNamesArray_49.SetAt(1, "TRackBC");
      _ColumnIdsArray_49.SetAt(1, 1);
      _ColumnNamesArray_49.SetAt(2, "TLabwareId");
      _ColumnIdsArray_49.SetAt(2, 2);
      _ColumnNamesArray_49.SetAt(3, "TPositionId");
      _ColumnIdsArray_49.SetAt(3, 3);
      _ColumnNamesArray_49.SetAt(4, "TPositionBC");
      _ColumnIdsArray_49.SetAt(4, 4);
      _ColumnNamesArray_49.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_49.SetAt(5, 5);
      _ColumnNamesArray_49.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_49.SetAt(6, 6);
      _ColumnNamesArray_49.SetAt(7, "TVolume");
      _ColumnIdsArray_49.SetAt(7, 7);
      _ColumnNamesArray_49.SetAt(8, "SRackBC");
      _ColumnIdsArray_49.SetAt(8, 8);
      _ColumnNamesArray_49.SetAt(9, "SLabwareId");
      _ColumnIdsArray_49.SetAt(9, 9);
      _ColumnNamesArray_49.SetAt(10, "SPositionId");
      _ColumnIdsArray_49.SetAt(10, 10);
      _ColumnNamesArray_49.SetAt(11, "SPositionBC");
      _ColumnIdsArray_49.SetAt(11, 11);
      _ColumnNamesArray_49.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_49.SetAt(12, 12);
      _ColumnNamesArray_49.SetAt(13, "UserName");
      _ColumnIdsArray_49.SetAt(13, 13);
      _ExperimentsArray_49.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_49, 0, _ColumnIdsArray_49, _ColumnNamesArray_49, _ExperimentsArray_49, "<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_NaOH <<<<<<<<<<"));
  }
} // library namespace
