#pragma once
#include "HSLFileDirectoryLib.hsl"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace RUNTIMEERRORHANDLING {
  variable _strRunTimeErrorFilePath;
  function FileCreationTimeOutError(  ) variable ;
  function HardwareError(  ) variable ;
  function PipettingError(  ) variable ;
  function PumpModuleError(  ) variable ;
  function SeeSawModuleError(  ) variable ;
  function TiltModuleError(  ) variable ;
  function TransportError(  ) variable ;
  private function _definitions(  ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function SeeSawModuleError(  ) variable {
    private variable blnFileExists;
    private variable blnReturnValue;
    private variable strRunTimeErrorFileSeeSawModuleError;
    private variable strRunTimeErrorFileTiltModuleError;
    private variable strRunTimeErrorFileTransportError;
    private file hndRunTimeErrorFile;
    private variable strRunTimeErrorFilePipettingError;
    private variable strRunTimeErrorFileCreationTimeoutError;
    private variable strRunTimeErrorUnknownHardwareError;
    private variable strRunTimeErrorFilePumpModuleError;
    MECC::TraceComment(Translate("----------RUN TIME ERRORHANDLING SMT : SEESAW MODULE ERROR : START----------"));
    blnReturnValue = 0;
    _definitions();
    blnFileExists = FileDirectoryLib::CheckIfFileExists(_strRunTimeErrorFilePath);
    if (blnFileExists == 1)
    {
      FileDirectoryLib::DeleteFile(_strRunTimeErrorFilePath);
    }
    strRunTimeErrorFilePumpModuleError = "0";
    strRunTimeErrorFileSeeSawModuleError = "1";
    strRunTimeErrorFileTiltModuleError = "0";
    strRunTimeErrorFileTransportError = "0";
    strRunTimeErrorFilePipettingError = "0";
    strRunTimeErrorFileCreationTimeoutError = "0";
    strRunTimeErrorUnknownHardwareError = "0";
    onerror goto errLabel_1 ;
    err.Clear();
    hndRunTimeErrorFile.AddField("SeeSawModuleError", strRunTimeErrorFileSeeSawModuleError, hslString, 255);
    hndRunTimeErrorFile.AddField("TiltModuleError", strRunTimeErrorFileTiltModuleError, hslString, 255);
    hndRunTimeErrorFile.AddField("TransportError", strRunTimeErrorFileTransportError, hslString, 255);
    hndRunTimeErrorFile.AddField("PipettingError", strRunTimeErrorFilePipettingError, hslString, 255);
    hndRunTimeErrorFile.AddField("FileCreationTimeoutError", strRunTimeErrorFileCreationTimeoutError, hslString, 255);
    hndRunTimeErrorFile.AddField("UnknownHardwareError", strRunTimeErrorUnknownHardwareError, hslString, 255);
    hndRunTimeErrorFile.AddField("PumpModuleError", strRunTimeErrorFilePumpModuleError, hslString, 255);
    hndRunTimeErrorFile.SetDelimiter(",");
    if( 0 == hndRunTimeErrorFile.Open(_strRunTimeErrorFilePath, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strRunTimeErrorFilePath, "HxMetEdCompCmd");
    }
    if( 0 == hndRunTimeErrorFile.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != hndRunTimeErrorFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    hndRunTimeErrorFile.RemoveFields();
    errLabel_1 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      blnReturnValue = 1;
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Problem creating run time error file"), Translate(""));
      MECC::TraceComment(Translate("----------RUN TIME ERRORHANDLING SMT : SEESAW MODULE ERROR : START----------"));
      return (blnReturnValue);
    }   /* end if from skip handler if no error */
    MECC::TraceComment(Translate("----------RUN TIME ERRORHANDLING SMT : SEESAW MODULE ERROR : START----------"));
    return (blnReturnValue);
  }

  private function _definitions(  ) void {
    MECC::TraceComment(Translate("----------RUN TIME ERRORHANDLING SMT : DEFINITIONS : START----------"));
    _strRunTimeErrorFilePath = "C:\\PAATestFolder\\RunTimeError\\RunTimeError.csv";
    MECC::TraceComment(Translate("----------RUN TIME ERRORHANDLING SMT : DEFINITIONS : END----------"));
  }

  function TiltModuleError(  ) variable {
    private variable blnFileExists;
    private variable blnReturnValue;
    private variable strRunTimeErrorFileSeeSawModuleError;
    private variable strRunTimeErrorFileTiltModuleError;
    private variable strRunTimeErrorFileTransportError;
    private file hndRunTimeErrorFile;
    private variable strRunTimeErrorFilePipettingError;
    private variable strRunTimeErrorFileCreationTimeoutError;
    private variable strRunTimeErrorUnknownHardwareError;
    private variable strRunTimeErrorFilePumpModuleError;
    MECC::TraceComment(Translate("----------RUN TIME ERRORHANDLING SMT :  TILT MODULE ERROR : START----------"));
    blnReturnValue = 0;
    _definitions();
    blnFileExists = FileDirectoryLib::CheckIfFileExists(_strRunTimeErrorFilePath);
    if (blnFileExists == 1)
    {
      FileDirectoryLib::DeleteFile(_strRunTimeErrorFilePath);
    }
    strRunTimeErrorFilePumpModuleError = "0";
    strRunTimeErrorFileSeeSawModuleError = "0";
    strRunTimeErrorFileTiltModuleError = "1";
    strRunTimeErrorFileTransportError = "0";
    strRunTimeErrorFilePipettingError = "0";
    strRunTimeErrorFileCreationTimeoutError = "0";
    strRunTimeErrorUnknownHardwareError = "0";
    onerror goto errLabel_2 ;
    err.Clear();
    hndRunTimeErrorFile.AddField("SeeSawModuleError", strRunTimeErrorFileSeeSawModuleError, hslString, 255);
    hndRunTimeErrorFile.AddField("TiltModuleError", strRunTimeErrorFileTiltModuleError, hslString, 255);
    hndRunTimeErrorFile.AddField("TransportError", strRunTimeErrorFileTransportError, hslString, 255);
    hndRunTimeErrorFile.AddField("PipettingError", strRunTimeErrorFilePipettingError, hslString, 255);
    hndRunTimeErrorFile.AddField("FileCreationTimeoutError", strRunTimeErrorFileCreationTimeoutError, hslString, 255);
    hndRunTimeErrorFile.AddField("UnknownHardwareError", strRunTimeErrorUnknownHardwareError, hslString, 255);
    hndRunTimeErrorFile.AddField("PumpModuleError", strRunTimeErrorFilePumpModuleError, hslString, 255);
    hndRunTimeErrorFile.SetDelimiter(",");
    if( 0 == hndRunTimeErrorFile.Open(_strRunTimeErrorFilePath, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strRunTimeErrorFilePath, "HxMetEdCompCmd");
    }
    if( 0 == hndRunTimeErrorFile.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != hndRunTimeErrorFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    hndRunTimeErrorFile.RemoveFields();
    errLabel_2 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      blnReturnValue = 1;
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Problem creating run time error file"), Translate(""));
      MECC::TraceComment(Translate("----------RUN TIME ERRORHANDLING SMT : TILT MODULE ERROR : START----------"));
      return (blnReturnValue);
    }   /* end if from skip handler if no error */
    MECC::TraceComment(Translate("----------RUN TIME ERRORHANDLING SMT : TILT MODULE ERROR : START----------"));
    return (blnReturnValue);
  }

  function TransportError(  ) variable {
    private variable blnFileExists;
    private variable blnReturnValue;
    private variable strRunTimeErrorFileSeeSawModuleError;
    private variable strRunTimeErrorFileTiltModuleError;
    private variable strRunTimeErrorFileTransportError;
    private file hndRunTimeErrorFile;
    private variable strRunTimeErrorFilePipettingError;
    private variable strRunTimeErrorFileCreationTimeoutError;
    private variable strRunTimeErrorUnknownHardwareError;
    private variable strRunTimeErrorFilePumpModuleError;
    MECC::TraceComment(Translate("----------RUN TIME ERRORHANDLING SMT :  TRANSPORT ERROR : START----------"));
    blnReturnValue = 0;
    _definitions();
    blnFileExists = FileDirectoryLib::CheckIfFileExists(_strRunTimeErrorFilePath);
    if (blnFileExists == 1)
    {
      FileDirectoryLib::DeleteFile(_strRunTimeErrorFilePath);
    }
    strRunTimeErrorFilePumpModuleError = "0";
    strRunTimeErrorFileSeeSawModuleError = "0";
    strRunTimeErrorFileTiltModuleError = "0";
    strRunTimeErrorFileTransportError = "1";
    strRunTimeErrorFilePipettingError = "0";
    strRunTimeErrorFileCreationTimeoutError = "0";
    strRunTimeErrorUnknownHardwareError = "0";
    onerror goto errLabel_3 ;
    err.Clear();
    hndRunTimeErrorFile.AddField("SeeSawModuleError", strRunTimeErrorFileSeeSawModuleError, hslString, 255);
    hndRunTimeErrorFile.AddField("TiltModuleError", strRunTimeErrorFileTiltModuleError, hslString, 255);
    hndRunTimeErrorFile.AddField("TransportError", strRunTimeErrorFileTransportError, hslString, 255);
    hndRunTimeErrorFile.AddField("PipettingError", strRunTimeErrorFilePipettingError, hslString, 255);
    hndRunTimeErrorFile.AddField("FileCreationTimeoutError", strRunTimeErrorFileCreationTimeoutError, hslString, 255);
    hndRunTimeErrorFile.AddField("UnknownHardwareError", strRunTimeErrorUnknownHardwareError, hslString, 255);
    hndRunTimeErrorFile.AddField("PumpModuleError", strRunTimeErrorFilePumpModuleError, hslString, 255);
    hndRunTimeErrorFile.SetDelimiter(",");
    if( 0 == hndRunTimeErrorFile.Open(_strRunTimeErrorFilePath, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strRunTimeErrorFilePath, "HxMetEdCompCmd");
    }
    if( 0 == hndRunTimeErrorFile.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != hndRunTimeErrorFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    hndRunTimeErrorFile.RemoveFields();
    errLabel_3 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      blnReturnValue = 1;
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Problem creating run time error file"), Translate(""));
      MECC::TraceComment(Translate("----------RUN TIME ERRORHANDLING SMT : TRANSPORT MODULE : START----------"));
      return (blnReturnValue);
    }   /* end if from skip handler if no error */
    MECC::TraceComment(Translate("----------RUN TIME ERRORHANDLING SMT : TRANSPORT ERROR : START----------"));
    return (blnReturnValue);
  }

  function PipettingError(  ) variable {
    private variable blnFileExists;
    private variable strRunTimeErrorFileSeeSawModuleError;
    private variable strRunTimeErrorFileTiltModuleError;
    private variable strRunTimeErrorFilePipettingError;
    private variable strRunTimeErrorFileTransportError;
    private variable blnReturnValue;
    private file hndRunTimeErrorFile;
    private variable strRunTimeErrorFileCreationTimeoutError;
    private variable strRunTimeErrorUnknownHardwareError;
    private variable strRunTimeErrorFilePumpModuleError;
    MECC::TraceComment(Translate("----------RUN TIME ERRORHANDLING SMT :  PIPETTING ERROR : START----------"));
    blnReturnValue = 0;
    _definitions();
    blnFileExists = FileDirectoryLib::CheckIfFileExists(_strRunTimeErrorFilePath);
    if (blnFileExists == 1)
    {
      FileDirectoryLib::DeleteFile(_strRunTimeErrorFilePath);
    }
    strRunTimeErrorFilePumpModuleError = "0";
    strRunTimeErrorFileSeeSawModuleError = "0";
    strRunTimeErrorFileTiltModuleError = "0";
    strRunTimeErrorFileTransportError = "0";
    strRunTimeErrorFilePipettingError = "1";
    strRunTimeErrorFileCreationTimeoutError = "0";
    strRunTimeErrorUnknownHardwareError = "0";
    onerror goto errLabel_4 ;
    err.Clear();
    hndRunTimeErrorFile.AddField("SeeSawModuleError", strRunTimeErrorFileSeeSawModuleError, hslString, 255);
    hndRunTimeErrorFile.AddField("TiltModuleError", strRunTimeErrorFileTiltModuleError, hslString, 255);
    hndRunTimeErrorFile.AddField("TransportError", strRunTimeErrorFileTransportError, hslString, 255);
    hndRunTimeErrorFile.AddField("PipettingError", strRunTimeErrorFilePipettingError, hslString, 255);
    hndRunTimeErrorFile.AddField("FileCreationTimeoutError", strRunTimeErrorFileCreationTimeoutError, hslString, 255);
    hndRunTimeErrorFile.AddField("UnknownHardwareError", strRunTimeErrorUnknownHardwareError, hslString, 255);
    hndRunTimeErrorFile.AddField("PumpModuleError", strRunTimeErrorFilePumpModuleError, hslString, 255);
    hndRunTimeErrorFile.SetDelimiter(",");
    if( 0 == hndRunTimeErrorFile.Open(_strRunTimeErrorFilePath, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strRunTimeErrorFilePath, "HxMetEdCompCmd");
    }
    if( 0 == hndRunTimeErrorFile.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != hndRunTimeErrorFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    hndRunTimeErrorFile.RemoveFields();
    errLabel_4 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      blnReturnValue = 1;
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Problem creating run time error file"), Translate(""));
      MECC::TraceComment(Translate("----------RUN TIME ERRORHANDLING SMT : PIPETTING ERROR : START----------"));
      return (blnReturnValue);
    }   /* end if from skip handler if no error */
    MECC::TraceComment(Translate("----------RUN TIME ERRORHANDLING SMT : PIPETTING ERROR : START----------"));
    return (blnReturnValue);
  }

  function FileCreationTimeOutError(  ) variable {
    private variable blnFileExists;
    private variable strRunTimeErrorFileCreationTimeoutError;
    private variable strRunTimeErrorFileSeeSawModuleError;
    private variable strRunTimeErrorFileTiltModuleError;
    private variable strRunTimeErrorFilePipettingError;
    private variable strRunTimeErrorFileTransportError;
    private variable blnReturnValue;
    private file hndRunTimeErrorFile;
    private variable strRunTimeErrorUnknownHardwareError;
    private variable strRunTimeErrorFilePumpModuleError;
    MECC::TraceComment(Translate("----------RUN TIME ERRORHANDLING SMT :  FILE CREATION TIMEOUT ERROR : START----------"));
    blnReturnValue = 0;
    _definitions();
    blnFileExists = FileDirectoryLib::CheckIfFileExists(_strRunTimeErrorFilePath);
    if (blnFileExists == 1)
    {
      FileDirectoryLib::DeleteFile(_strRunTimeErrorFilePath);
    }
    strRunTimeErrorFilePumpModuleError = "0";
    strRunTimeErrorFileSeeSawModuleError = "0";
    strRunTimeErrorFileTiltModuleError = "0";
    strRunTimeErrorFileTransportError = "0";
    strRunTimeErrorFilePipettingError = "0";
    strRunTimeErrorFileCreationTimeoutError = "1";
    strRunTimeErrorUnknownHardwareError = "0";
    onerror goto errLabel_5 ;
    err.Clear();
    hndRunTimeErrorFile.AddField("SeeSawModuleError", strRunTimeErrorFileSeeSawModuleError, hslString, 255);
    hndRunTimeErrorFile.AddField("TiltModuleError", strRunTimeErrorFileTiltModuleError, hslString, 255);
    hndRunTimeErrorFile.AddField("TransportError", strRunTimeErrorFileTransportError, hslString, 255);
    hndRunTimeErrorFile.AddField("PipettingError", strRunTimeErrorFilePipettingError, hslString, 255);
    hndRunTimeErrorFile.AddField("FileCreationTimeoutError", strRunTimeErrorFileCreationTimeoutError, hslString, 255);
    hndRunTimeErrorFile.AddField("UnknownHardwareError", strRunTimeErrorUnknownHardwareError, hslString, 255);
    hndRunTimeErrorFile.AddField("PumpModuleError", strRunTimeErrorFilePumpModuleError, hslString, 255);
    hndRunTimeErrorFile.SetDelimiter(",");
    if( 0 == hndRunTimeErrorFile.Open(_strRunTimeErrorFilePath, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strRunTimeErrorFilePath, "HxMetEdCompCmd");
    }
    if( 0 == hndRunTimeErrorFile.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != hndRunTimeErrorFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    hndRunTimeErrorFile.RemoveFields();
    errLabel_5 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      blnReturnValue = 1;
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Problem creating run time error file"), Translate(""));
      MECC::TraceComment(Translate("----------RUN TIME ERRORHANDLING SMT :  FILE CREATION TIMEOUT ERROR : END----------"));
      return (blnReturnValue);
    }   /* end if from skip handler if no error */
    MECC::TraceComment(Translate("----------RUN TIME ERRORHANDLING SMT :  FILE CREATION TIMEOUT ERROR : END----------"));
    return (blnReturnValue);
  }

  function HardwareError(  ) variable {
    private variable blnFileExists;
    private variable strRunTimeErrorFileSeeSawModuleError;
    private variable strRunTimeErrorFileCreationTimeoutError;
    private variable strRunTimeErrorUnknownHardwareError;
    private variable strRunTimeErrorFileTiltModuleError;
    private variable strRunTimeErrorFilePipettingError;
    private variable strRunTimeErrorFileTransportError;
    private variable blnReturnValue;
    private file hndRunTimeErrorFile;
    private variable strRunTimeErrorFilePumpModuleError;
    MECC::TraceComment(Translate("----------RUN TIME ERRORHANDLING SMT :  UNKNOWN HARDWARE ERROR : START----------"));
    blnReturnValue = 0;
    _definitions();
    blnFileExists = FileDirectoryLib::CheckIfFileExists(_strRunTimeErrorFilePath);
    if (blnFileExists == 1)
    {
      FileDirectoryLib::DeleteFile(_strRunTimeErrorFilePath);
    }
    strRunTimeErrorFilePumpModuleError = "0";
    strRunTimeErrorFileSeeSawModuleError = "0";
    strRunTimeErrorFileTiltModuleError = "0";
    strRunTimeErrorFileTransportError = "0";
    strRunTimeErrorFilePipettingError = "0";
    strRunTimeErrorFileCreationTimeoutError = "0";
    strRunTimeErrorUnknownHardwareError = "1";
    onerror goto errLabel_6 ;
    err.Clear();
    hndRunTimeErrorFile.AddField("SeeSawModuleError", strRunTimeErrorFileSeeSawModuleError, hslString, 255);
    hndRunTimeErrorFile.AddField("TiltModuleError", strRunTimeErrorFileTiltModuleError, hslString, 255);
    hndRunTimeErrorFile.AddField("TransportError", strRunTimeErrorFileTransportError, hslString, 255);
    hndRunTimeErrorFile.AddField("PipettingError", strRunTimeErrorFilePipettingError, hslString, 255);
    hndRunTimeErrorFile.AddField("FileCreationTimeoutError", strRunTimeErrorFileCreationTimeoutError, hslString, 255);
    hndRunTimeErrorFile.AddField("UnknownHardwareError", strRunTimeErrorUnknownHardwareError, hslString, 255);
    hndRunTimeErrorFile.AddField("PumpModuleError", strRunTimeErrorFilePumpModuleError, hslString, 255);
    hndRunTimeErrorFile.SetDelimiter(",");
    if( 0 == hndRunTimeErrorFile.Open(_strRunTimeErrorFilePath, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strRunTimeErrorFilePath, "HxMetEdCompCmd");
    }
    if( 0 == hndRunTimeErrorFile.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != hndRunTimeErrorFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    hndRunTimeErrorFile.RemoveFields();
    errLabel_6 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      blnReturnValue = 1;
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Problem creating run time error file"), Translate(""));
      MECC::TraceComment(Translate("----------RUN TIME ERRORHANDLING SMT :  UNKNOWN HARDWARE ERROR : END----------"));
      return (blnReturnValue);
    }   /* end if from skip handler if no error */
    MECC::TraceComment(Translate("----------RUN TIME ERRORHANDLING SMT :  UNKNOWN HARDWARE ERROR : END----------"));
    return (blnReturnValue);
  }

  function PumpModuleError(  ) variable {
    private variable blnFileExists;
    private variable strRunTimeErrorFilePumpModuleError;
    private variable strRunTimeErrorFileCreationTimeoutError;
    private variable strRunTimeErrorFileSeeSawModuleError;
    private variable strRunTimeErrorUnknownHardwareError;
    private variable strRunTimeErrorFileTiltModuleError;
    private variable strRunTimeErrorFilePipettingError;
    private variable strRunTimeErrorFileTransportError;
    private variable blnReturnValue;
    private file hndRunTimeErrorFile;
    MECC::TraceComment(Translate("----------RUN TIME ERRORHANDLING SMT :  PUMP MODULE ERROR : START----------"));
    blnReturnValue = 0;
    _definitions();
    blnFileExists = FileDirectoryLib::CheckIfFileExists(_strRunTimeErrorFilePath);
    if (blnFileExists == 1)
    {
      FileDirectoryLib::DeleteFile(_strRunTimeErrorFilePath);
    }
    strRunTimeErrorFilePumpModuleError = "1";
    strRunTimeErrorFileSeeSawModuleError = "0";
    strRunTimeErrorFileTiltModuleError = "0";
    strRunTimeErrorFileTransportError = "0";
    strRunTimeErrorFilePipettingError = "0";
    strRunTimeErrorFileCreationTimeoutError = "0";
    strRunTimeErrorUnknownHardwareError = "0";
    onerror goto errLabel_7 ;
    err.Clear();
    hndRunTimeErrorFile.AddField("SeeSawModuleError", strRunTimeErrorFileSeeSawModuleError, hslString, 255);
    hndRunTimeErrorFile.AddField("TiltModuleError", strRunTimeErrorFileTiltModuleError, hslString, 255);
    hndRunTimeErrorFile.AddField("TransportError", strRunTimeErrorFileTransportError, hslString, 255);
    hndRunTimeErrorFile.AddField("PipettingError", strRunTimeErrorFilePipettingError, hslString, 255);
    hndRunTimeErrorFile.AddField("FileCreationTimeoutError", strRunTimeErrorFileCreationTimeoutError, hslString, 255);
    hndRunTimeErrorFile.AddField("UnknownHardwareError", strRunTimeErrorUnknownHardwareError, hslString, 255);
    hndRunTimeErrorFile.AddField("PumpModuleError", strRunTimeErrorFilePumpModuleError, hslString, 255);
    hndRunTimeErrorFile.SetDelimiter(",");
    if( 0 == hndRunTimeErrorFile.Open(_strRunTimeErrorFilePath, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strRunTimeErrorFilePath, "HxMetEdCompCmd");
    }
    if( 0 == hndRunTimeErrorFile.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != hndRunTimeErrorFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    hndRunTimeErrorFile.RemoveFields();
    errLabel_7 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      blnReturnValue = 1;
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("Problem creating run time error file"), Translate(""));
      MECC::TraceComment(Translate("----------RUN TIME ERRORHANDLING SMT : TRANSPORT MODULE : START----------"));
      return (blnReturnValue);
    }   /* end if from skip handler if no error */
    MECC::TraceComment(Translate("----------RUN TIME ERRORHANDLING SMT : PUMP MODULE ERROR : START----------"));
    return (blnReturnValue);
  }
} // library namespace
