#pragma once
#include "HSLSeqLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLDevLib.hsl"
#include "HSLUtilLib.hsl"
#include "HSLUtilLib2.hsl"
#include "HSLExtensions\\File.hsl"
#include "HSLDeckVisualize.hsl"
#include "HSLExtensions\\Directory.hsl"
#include "STAR Tools\\Resources\\SubMethods\\HelperLibrary.hs_"
#include "HSL_MethodHelper.hsl"
#include "Firmware Libraries\\Channel_Query_1mL.hs_"
#include "HSLMlStarStepReturnLib.hsl"
#include "HSLFilLib.hsl"
#include "HSLExtensions\\Venus.hsl"
#include "STAR Tools\\Resources\\SubMethods\\Tip Tool Global Variables.hsl"
#include "STAR Tools\\Resources\\SubMethods\\TIP_OFFSET_GLOBAL.hsl"
#include "STAR Tools\\Resources\\SubMethods\\TipCounterGlobal.hsl"
#include "HSLErrLib.hsl"
#include "HSLExtensions\\Core.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace STAR_TIP_TOOLS {
  private function ABSTRACT(  ) void ;
  function BuildChannelPattern( variable i_int_NumActiveChannels, variable i_int_TotalChannels, variable & o_str_ChPattern ) void ;
  function DefragTipRacks1mL( device & ML_STAR, sequence & io_seq_Tips ) void ;
  function DefragTipRacks5mL( device & ML_STAR, sequence & io_seq_Tips ) void ;
  function Get1mLChannelCount( device & ML_STAR, variable & o_int_Total1mLChannels ) void ;
  function Get5mLChannelCount( device & ML_STAR, variable & o_int_Total5mLChannels ) void ;
  function GetTipCounter( device & ML_STAR, sequence & io_seqTips, variable & o_strTipCounter ) void ;
  function GetTipType( device & Instrument, sequence i_seq_Tips, variable & o_int_TipType ) void ;
  function Optimized1mLTipPickup( device & ML_STAR, sequence & io_seq_TipSequence, sequence i_seq_ControlSequence, variable i_str_TipCounter, variable & o_str_ChannelPattern ) void ;
  function Optimized1mLTipPickup2( device & ML_STAR, sequence & io_seq_TipSequence, variable i_str_TipCounter, variable i_str_ChannelPattern ) void ;
  function Optimized5mLTipPickup( device & ML_STAR, sequence & io_seq_TipSequence, sequence i_seq_ControlSequence, variable i_str_TipCounter, variable & o_str_ChannelPattern ) void ;
  function Optimized5mLTipPickup2( device & ML_STAR, sequence & io_seq_TipSequence, variable i_str_TipCounter, variable i_str_ChannelPattern ) void ;
  function ResetInputSequence( device & Instrument, sequence & io_seq_SequenceToReset ) void ;
  function TipCapacityCheck( device & Instrument, sequence i_seq_TipsToCheck, variable & o_flt_TipCapacity ) void ;
  function TipCheck( device & Instrument, sequence & io_seq_Tips, variable i_str_TipCounter, variable i_int_TipsNeeded ) void ;
  function TipCheck2( device & Instrument, sequence & io_seq_Tips, sequence & i_seq_ControlSequence, variable i_str_TipCounter ) void ;
  function TipCheckMPH96( device & Instrument, sequence & io_seq_Tips, variable i_str_TipCounter ) void ;
  function TipCountNeeded_Add( variable i_str_TipCounter, variable i_int_NumberOfTips ) void ;
  function TipCountNeeded_Get( variable i_str_TipCounter, variable & o_int_NumberOfTips ) void ;
  function TipCountNeeded_Reset( variable i_str_TipCounter ) void ;
  function TipCounter_Edit( device & ML_STAR, sequence & io_seq_TipSequence, variable i_str_TipCounter, variable i_int_TimeOut ) void ;
  function TipCounter_Read( device & ML_STAR, sequence & io_seq_TipSequence, variable i_str_TipCounter ) void ;
  function TipCounter_SetShow( device & ML_STAR, sequence & io_seq_TipSequence, variable i_str_TipCounter, variable i_int_TimeOut, variable i_int_StartPosition, variable i_int_EndPosition ) void ;
  function TipCounter_Write( device & ML_STAR, sequence i_seq_TipSequence, variable i_str_TipCounter ) void ;
  function TipTypeCheck1mL( device & ML_STAR, variable i_str_ReturnFromTipPickUp, sequence & o_seq_IncorrectTipReturn, variable & o_str_IncorrectChannels ) variable ;
  function TipTypeLength_Get( variable i_int_TipType, variable & o_flt_TipLength ) void ;
  private function _ConvertChannelPatternToArray( variable i_str_ChannelPattern, variable & o_arr_ChannelPatternArray[] ) void ;
  private function _ConvertToInteger( variable & io_Value ) void ;
  private function _DetermineTipCheckLC( variable i_int_TipType, variable & o_str_LiquidClass, variable & o_flt_CheckVolume ) void ;
  private function _GetCurrentPosition( device & Instrument, sequence i_seq_Labware, variable & o_flt_X_Coord, variable & o_flt_Y_Coord, variable & o_flt_Z_Coord ) void ;
  private function _GetSequenceName( device & Instrument, sequence i_seq_SequenceToCheck, variable & o_strSequenceName, variable & o_intTotalPositions ) void ;
  private function _GetSequencePosition( device & Instrument, sequence i_seq_LabwareSequence, variable & o_str_LabID, variable & o_str_PosID ) variable ;
  private function _GetTipCounterFolderPath( variable & o_str_TipCounterFolder ) void ;
  private function _GetTipCounterName( variable i_strInstrumentClass, variable i_intTipType, variable & o_strTipCounterName ) variable ;
  private function _GetTipType( device & Instrument, variable i_str_LabwareID, variable & o_int_TipType ) void ;
  private function _LocalTipCounterRead( device & ML_STAR, sequence & io_seq_TipSequence, variable i_str_TipCounter ) void ;
  private function _Lookup( variable & array[], variable item ) variable ;
  private function _RemoveInvalidCharacters( variable & io_str_Value ) void ;
  private function _SortSequenceLabIDXY( device & Instrument, sequence & io_Sequence ) void ;
  private function _SortSequenceYPriority( device & Instrument, sequence & io_Sequence ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    HELPERLIBRARY::_InitLibrary();
    CHANNEL_QUERY_1ML::_InitLibrary();
  }
  function _ExitLibrary() {
    HELPERLIBRARY::_ExitLibrary();
    CHANNEL_QUERY_1ML::_ExitLibrary();
  }

  function TipCheck( device & Instrument, sequence & io_seq_Tips, variable i_str_TipCounter, variable i_int_TipsNeeded ) void {
    private dialog customDialog_1;
    private variable int_CurrentPosition;
    private variable flt_TipCapacity;
    private variable str_TipMessage;
    private variable int_EndPosition;
    private variable int_PositionsRemaining;
    private variable str_TipName;
    MECC::TraceComment(Translate("=========  Check tip sequence"));
    TipCapacityCheck(Instrument, io_seq_Tips, flt_TipCapacity);
    if (flt_TipCapacity == 0.0)
    {
      flt_TipCapacity = Translate("Unknown");
    }
    str_TipName = StrConcat4(flt_TipCapacity, Translate(" uL Tips"), Translate(""), Translate(""));
    str_TipMessage = StrConcat4(Translate("Please load more "), str_TipName, Translate(" on to the deck."), Translate(""));
    {
      while (1 == 1)
      {
        int_CurrentPosition = io_seq_Tips.GetCurrentPosition();
        int_EndPosition = io_seq_Tips.GetCount();
        if (int_CurrentPosition == 0)
        {
          int_CurrentPosition = int_EndPosition + 1;
        }
        int_PositionsRemaining = int_EndPosition - int_CurrentPosition;
        int_PositionsRemaining = int_PositionsRemaining + 1;
        Trace("     ","Positions Remaining:  ",int_PositionsRemaining,"  Tips Needed:  ",i_int_TipsNeeded);
        if (int_PositionsRemaining >= i_int_TipsNeeded)
        {
          MECC::TraceComment(Translate("------------------  Sufficient tips found"));
          break;
        }
        MECC::TraceComment(Translate("------------------  Insufficient tips found"));
        customDialog_1.InitCustomDialog("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");
        customDialog_1.SetCustomDialogProperty( "textBlock2.Text", str_TipMessage );
        customDialog_1.ShowCustomDialog();
        ResetInputSequence(Instrument, io_seq_Tips);
        TipCounter_Edit(Instrument, io_seq_Tips, i_str_TipCounter, 99999);
      }
    }
  }

  function TipCapacityCheck( device & Instrument, sequence i_seq_TipsToCheck, variable & o_flt_TipCapacity ) void {
    private variable int_TipType;
    o_flt_TipCapacity = 0;
    GetTipType(Instrument, i_seq_TipsToCheck, int_TipType);
    o_flt_TipCapacity = 0.0;
    if (int_TipType == 0)
    {
      o_flt_TipCapacity = 300;
    }
    if (int_TipType == 1)
    {
      o_flt_TipCapacity = 300;
    }
    if (int_TipType == 2)
    {
      o_flt_TipCapacity = 10;
    }
    if (int_TipType == 3)
    {
      o_flt_TipCapacity = 10;
    }
    if (int_TipType == 4)
    {
      o_flt_TipCapacity = 1000;
    }
    if (int_TipType == 5)
    {
      o_flt_TipCapacity = 1000;
    }
    if (int_TipType == 25)
    {
      o_flt_TipCapacity = 5000;
    }
    if (int_TipType == 20)
    {
      o_flt_TipCapacity = 50;
    }
    if (int_TipType == 22)
    {
      o_flt_TipCapacity = 50;
    }
    if (int_TipType == 23)
    {
      o_flt_TipCapacity = 50;
    }
    if (int_TipType == 28)
    {
      o_flt_TipCapacity = 300;
    }
    if (int_TipType == 29)
    {
      o_flt_TipCapacity = 4000;
    }
    if (int_TipType == 30)
    {
      o_flt_TipCapacity = 300;
    }
    if (int_TipType == 31)
    {
      o_flt_TipCapacity = 50;
    }
    if (int_TipType == 32)
    {
      o_flt_TipCapacity = 10;
    }
    if (int_TipType == 33)
    {
      o_flt_TipCapacity = 50;
    }
    if (int_TipType == 37)
    {
      o_flt_TipCapacity = 50;
    }
    if (int_TipType == 54)
    {
      o_flt_TipCapacity = 50;
    }
    if (int_TipType == 55)
    {
      o_flt_TipCapacity = 50;
    }
  }

  function ResetInputSequence( device & Instrument, sequence & io_seq_SequenceToReset ) void {
    {
         Instrument.CopyResetSequence(io_seq_SequenceToReset.GetName(),io_seq_SequenceToReset);
    }
  }

  private function _GetTipType( device & Instrument, variable i_str_LabwareID, variable & o_int_TipType ) void {
    private variable str_TipType;
    private variable l_blnLabwareValid;
    o_int_TipType = 0;
    o_int_TipType = Translate("");
    l_blnLabwareValid = DevIsValidLabwareForCurrentDeckLayout(Instrument, i_str_LabwareID);
    if (l_blnLabwareValid == BOOLEON::FALSE)
    {
      o_int_TipType = -1;
      return;
    }
    onerror goto errLabel_2 ;
    err.Clear();
    str_TipType = DevGetLabwareData(Instrument, i_str_LabwareID, Translate("MlStarTipRack"));
    errLabel_2 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
    if (str_TipType == "")
    {
      onerror goto errLabel_3 ;
      err.Clear();
      str_TipType = DevGetLabwareData(Instrument, i_str_LabwareID, Translate("MlStarXLTipRack"));
      errLabel_3 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
      }   /* end if from skip handler if no error */
    }
    if (str_TipType == "")
    {
      str_TipType = Translate("-1");
    }
    o_int_TipType = StrIVal(str_TipType);
  }

  function TipCheck2( device & Instrument, sequence & io_seq_Tips, sequence & i_seq_ControlSequence, variable i_str_TipCounter ) void {
    private dialog customDialog_4;
    private variable int_CurrentPosition;
    private variable flt_TipCapacity;
    private variable str_TipMessage;
    private variable int_EndPosition;
    private variable int_PositionsRemaining;
    private variable str_TipName;
    private variable int_TipsNeeded;
    MECC::TraceComment(Translate("=========  Check tip sequence"));
    TipCapacityCheck(Instrument, io_seq_Tips, flt_TipCapacity);
    HELPERLIBRARY::RemoveTruncatedSequencePositions(Instrument, i_seq_ControlSequence);
    int_TipsNeeded = SeqGetTotal(i_seq_ControlSequence);
    if (flt_TipCapacity == 0.0)
    {
      flt_TipCapacity = Translate("Unknown");
    }
    str_TipName = StrConcat4(flt_TipCapacity, Translate(" uL Tips"), Translate(""), Translate(""));
    str_TipMessage = StrConcat4(Translate("Please load more "), str_TipName, Translate(" on to the deck."), Translate(""));
    {
      while (1 == 1)
      {
        int_CurrentPosition = io_seq_Tips.GetCurrentPosition();
        int_EndPosition = io_seq_Tips.GetCount();
        if (int_CurrentPosition == 0)
        {
          int_CurrentPosition = int_EndPosition + 1;
        }
        int_PositionsRemaining = int_EndPosition - int_CurrentPosition;
        int_PositionsRemaining = int_PositionsRemaining + 1;
        Trace("     ","Positions Remaining:  ",int_PositionsRemaining,"  Tips Needed:  ",int_TipsNeeded);
        if (int_PositionsRemaining >= int_TipsNeeded)
        {
          MECC::TraceComment(Translate("------------------  Sufficient tips found"));
          break;
        }
        MECC::TraceComment(Translate("------------------  Insufficient tips found"));
        customDialog_4.InitCustomDialog("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");
        customDialog_4.SetCustomDialogProperty( "textBlock2.Text", str_TipMessage );
        customDialog_4.ShowCustomDialog();
        ResetInputSequence(Instrument, io_seq_Tips);
        TipCounter_Edit(Instrument, io_seq_Tips, i_str_TipCounter, 99999);
      }
    }
  }

  private function _GetSequencePosition( device & Instrument, sequence i_seq_LabwareSequence, variable & o_str_LabID, variable & o_str_PosID ) variable {
    private variable bool_SequenceValid;
    o_str_LabID = 0;
    o_str_PosID = 0;
    bool_SequenceValid = 1;
    o_str_LabID = Translate("");
    o_str_PosID = Translate("");
    onerror goto errLabel_5 ;
    err.Clear();
    o_str_LabID = SeqGetLabwareId(i_seq_LabwareSequence);
    o_str_PosID = SeqGetPositionId(i_seq_LabwareSequence);
    if (o_str_LabID == "")
    {
      bool_SequenceValid = 0;
    }
    errLabel_5 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      bool_SequenceValid = 0;
    }   /* end if from skip handler if no error */
    return (bool_SequenceValid);
  }

  private function _Lookup( variable & array[], variable item ) variable {
    private variable index;
    private variable lookupreturn;
    lookupreturn = Util::Lookup(array, item, index);
    if (lookupreturn > 0)
    {
      index = index + 1;
      return (index);
    }
    else
    {
      return (0);
    }
  }

  function Get1mLChannelCount( device & ML_STAR, variable & o_int_Total1mLChannels ) void {
    o_int_Total1mLChannels = 0;
    o_int_Total1mLChannels = 0;
    o_int_Total1mLChannels = DevGetCfgValueWithKey(ML_STAR, 1);
  }

  function Get5mLChannelCount( device & ML_STAR, variable & o_int_Total5mLChannels ) void {
    o_int_Total5mLChannels = 0;
    o_int_Total5mLChannels = 0;
    o_int_Total5mLChannels = DevGetCfgValueWithKey(ML_STAR, 43);
  }

  function BuildChannelPattern( variable i_int_NumActiveChannels, variable i_int_TotalChannels, variable & o_str_ChPattern ) void {
    o_str_ChPattern = 0;
    o_str_ChPattern = Translate("");
    o_str_ChPattern = StrFillLeft(o_str_ChPattern, Translate("1"), i_int_NumActiveChannels);
    o_str_ChPattern = StrFillRight(o_str_ChPattern, Translate("0"), i_int_TotalChannels);
    o_str_ChPattern = StrLeft(o_str_ChPattern, i_int_TotalChannels);
  }

  private function _GetCurrentPosition( device & Instrument, sequence i_seq_Labware, variable & o_flt_X_Coord, variable & o_flt_Y_Coord, variable & o_flt_Z_Coord ) void {
    private variable flt_NotUsed;
    private variable str_LabID;
    private variable bool_SequenceValid;
    private variable str_PosID;
    o_flt_X_Coord = 0;
    o_flt_Y_Coord = 0;
    o_flt_Z_Coord = 0;
    bool_SequenceValid = _GetSequencePosition(Instrument, i_seq_Labware, str_LabID, str_PosID);
    o_flt_X_Coord = 0.0;
    o_flt_Y_Coord = 0.0;
    o_flt_Z_Coord = 0.0;
    DevGetLabwarePositionEx(Instrument, str_LabID, str_PosID, o_flt_X_Coord, o_flt_Y_Coord, o_flt_Z_Coord, flt_NotUsed);
  }

  private function _ConvertChannelPatternToArray( variable i_str_ChannelPattern, variable & o_arr_ChannelPatternArray[] ) void {
    private variable int_NumChannels;
    private variable i;
    private variable str_CurrentValue;
    private variable a;
    o_arr_ChannelPatternArray.SetSize( 0);
    int_NumChannels = StrGetLength(i_str_ChannelPattern);
    o_arr_ChannelPatternArray.SetSize(int_NumChannels);
    {
      for(i = 0; i < int_NumChannels;)
      {
        i = i + 1;
        a = i - 1;
        str_CurrentValue = StrMid(i_str_ChannelPattern, a, 1);
        o_arr_ChannelPatternArray.SetAt(i-1, str_CurrentValue);
      }
    }
  }

  function TipCounter_Read( device & ML_STAR, sequence & io_seq_TipSequence, variable i_str_TipCounter ) void {
    private variable _strFunctionName;
    private variable l_strSequenceName;
    private variable l_intTotalPositions;
    private variable l_intAvailable;
    private variable l_strError;
    private variable l_strInstrumentClass;
    private variable l_intTipType;
    private variable l_strLabID;
    private variable l_intEmptyCheck;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::TRUE, BOOLEON::TRUE);
    TIP_OFFSET_GLOBAL::INIT::InitializeVariables();
    TIP_COUNTER::InitTipCountingLibrary();
    i_str_TipCounter = StrConcat2(i_str_TipCounter, Translate(""));
    if (i_str_TipCounter == "")
    {
      l_strError = StrConcat4(Translate("Tip counter '"), i_str_TipCounter, Translate("' is invalid!"), Translate(""));
      ErrRaise(101, l_strError);
    }
    if(0){
      l_strLabID = SeqGetLabwareId(io_seq_TipSequence);
    }
    l_strLabID = Translate("");
    l_intEmptyCheck = io_seq_TipSequence.GetCurrentPosition();
    {
         sequence sequenceObj;
         ML_STAR.CopyResetSequence(io_seq_TipSequence.GetName(), sequenceObj);
         l_strLabID = sequenceObj.GetLabwareId();
         //if(l_intEmptyCheck == 0) ML_STAR.CopyResetSequence(io_seq_TipSequence.GetName(), io_seq_TipSequence);
    }
    _GetSequenceName(ML_STAR, io_seq_TipSequence, l_strSequenceName, l_intTotalPositions);
    _GetTipType(ML_STAR, l_strLabID, l_intTipType);
    if (l_intTipType != -1)
    {
      l_strInstrumentClass = DevGetInstrumentName(ML_STAR);
      TIP_COUNTER::CheckTipCounterName(i_str_TipCounter);
      TRACE::TRACE02(Translate("Read tip counter:  "), i_str_TipCounter);
      TIP_COUNTER::ReadFromHxElementCounter(ML_STAR, io_seq_TipSequence, l_intTipType, i_str_TipCounter, l_strInstrumentClass);
      l_intAvailable = SeqGetTotal(io_seq_TipSequence);
      TRACE::TRACE08(l_strSequenceName, Translate(" :: "), l_intAvailable, Translate(" / "), l_intTotalPositions, Translate(""), Translate(""), Translate(""));
      DeckVisualize::UpdateUsedPositions(ML_STAR, io_seq_TipSequence, 5, Translate(""));
    }
    else
    {
      MECC::TraceComment(Translate("COULD NOT DETERMINE TIP TYPE!"));
    }
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
  }

  function TipCounter_Write( device & ML_STAR, sequence i_seq_TipSequence, variable i_str_TipCounter ) void {
    private variable _strFunctionName;
    private variable l_strSequenceName;
    private variable l_intTotalPositions;
    private variable l_intAvailable;
    private variable l_strError;
    private variable l_strInstrumentClass;
    private variable l_intTipType;
    private variable l_strLabID;
    private variable l_intEmptyCheck;
    private sequence l_seqTemp;
    private variable l_strName;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::TRUE, BOOLEON::TRUE);
    TIP_COUNTER::InitTipCountingLibrary();
    i_str_TipCounter = StrConcat2(i_str_TipCounter, Translate(""));
    if (i_str_TipCounter == "")
    {
      l_strError = StrConcat4(Translate("Tip counter '"), i_str_TipCounter, Translate("' is invalid!"), Translate(""));
      ErrRaise(101, l_strError);
    }
    l_intEmptyCheck = i_seq_TipSequence.GetCurrentPosition();
    if (l_intEmptyCheck == 0)
    {
      l_strName = SeqGetName(i_seq_TipSequence);
      if (l_strName == "seq_Temp")
      {
        i_seq_TipSequence.SetCurrentPosition(1);
        l_strLabID = SeqGetLabwareId(i_seq_TipSequence);
        i_seq_TipSequence.SetCurrentPosition(0);
      }
      else
      {
        SeqRemoveAll(l_seqTemp);
        ML_STAR.CopyResetSequence(i_seq_TipSequence.GetName(), l_seqTemp);
        l_strLabID = SeqGetLabwareId(l_seqTemp);
      }
      TIP_COUNTER::RemoveUsedPositions(ML_STAR, i_seq_TipSequence);
    }
    else
    {
      TIP_COUNTER::RemoveUsedPositions(ML_STAR, i_seq_TipSequence);
      l_strLabID = SeqGetLabwareId(i_seq_TipSequence);
    }
    _GetSequenceName(ML_STAR, i_seq_TipSequence, l_strSequenceName, l_intTotalPositions);
    _GetTipType(ML_STAR, l_strLabID, l_intTipType);
    if (l_intTipType != -1)
    {
      l_strInstrumentClass = DevGetInstrumentName(ML_STAR);
      TIP_COUNTER::CheckTipCounterName(i_str_TipCounter);
      TRACE::TRACE02(Translate("Read tip counter:  "), i_str_TipCounter);
      _SortSequenceLabIDXY(ML_STAR, i_seq_TipSequence);
      TIP_COUNTER::CreateNewHxElementCounter(i_seq_TipSequence, l_intTipType, i_str_TipCounter, l_strInstrumentClass);
      TIP_COUNTER::WriteHxElementCounter(i_seq_TipSequence, l_intTipType, i_str_TipCounter, l_strInstrumentClass);
      l_intAvailable = SeqGetTotal(i_seq_TipSequence);
      TRACE::TRACE08(l_strSequenceName, Translate(" :: "), l_intAvailable, Translate(" / "), l_intTotalPositions, Translate(""), Translate(""), Translate(""));
    }
    else
    {
      MECC::TraceComment(Translate("COULD NOT DETERMINE TIP TYPE!"));
    }
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
  }

  function TipCounter_Edit( device & ML_STAR, sequence & io_seq_TipSequence, variable i_str_TipCounter, variable i_int_TimeOut ) void {
    private variable _strFunctionName;
    private variable l_strSequenceName;
    private variable l_intTotalPositions;
    private variable l_intAvailable;
    private variable l_strError;
    private variable l_intTipType;
    private variable l_strInstrumentClass;
    private variable l_strLabID;
    private variable l_intEmptyCheck;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::TRUE, BOOLEON::TRUE);
    TIP_OFFSET_GLOBAL::INIT::InitializeVariables();
    TIP_COUNTER::InitTipCountingLibrary();
    i_str_TipCounter = StrConcat2(i_str_TipCounter, Translate(""));
    if (i_str_TipCounter == "")
    {
      l_strError = StrConcat4(Translate("Tip counter '"), i_str_TipCounter, Translate("' is invalid!"), Translate(""));
      ErrRaise(101, l_strError);
    }
    l_strLabID = Translate("");
    l_intEmptyCheck = io_seq_TipSequence.GetCurrentPosition();
    {
         sequence sequenceObj;
         ML_STAR.CopyResetSequence(io_seq_TipSequence.GetName(), sequenceObj);
         l_strLabID = sequenceObj.GetLabwareId();
         //if(l_intEmptyCheck == 0) ML_STAR.CopyResetSequence(io_seq_TipSequence.GetName(), io_seq_TipSequence);
    }
    if(0){
      l_strLabID = SeqGetLabwareId(io_seq_TipSequence);
    }
    _GetSequenceName(ML_STAR, io_seq_TipSequence, l_strSequenceName, l_intTotalPositions);
    _GetTipType(ML_STAR, l_strLabID, l_intTipType);
    if (l_intTipType != -1)
    {
      l_strInstrumentClass = DevGetInstrumentName(ML_STAR);
      TIP_COUNTER::CheckTipCounterName(i_str_TipCounter);
      TRACE::TRACE02(Translate("Read tip counter:  "), i_str_TipCounter);
      TIP_COUNTER::CreateNewHxElementCounter(io_seq_TipSequence, l_intTipType, i_str_TipCounter, l_strInstrumentClass);
      TIP_COUNTER::ReadFromHxElementCounter(ML_STAR, io_seq_TipSequence, l_intTipType, i_str_TipCounter, l_strInstrumentClass);
      TIP_COUNTER::RemoveUsedPositions(ML_STAR, io_seq_TipSequence);
      TIP_COUNTER::EditSequence(ML_STAR, io_seq_TipSequence, BOOLEON::TRUE, i_int_TimeOut);
      _SortSequenceLabIDXY(ML_STAR, io_seq_TipSequence);
      TIP_COUNTER::WriteHxElementCounter(io_seq_TipSequence, l_intTipType, i_str_TipCounter, l_strInstrumentClass);
      l_intAvailable = SeqGetTotal(io_seq_TipSequence);
      TRACE::TRACE08(l_strSequenceName, Translate(" :: "), l_intAvailable, Translate(" / "), l_intTotalPositions, Translate(""), Translate(""), Translate(""));
      DeckVisualize::UpdateUsedPositions(ML_STAR, io_seq_TipSequence, 5, Translate(""));
    }
    else
    {
      MECC::TraceComment(Translate("COULD NOT DETERMINE TIP TYPE!"));
    }
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
  }

  private function _GetTipCounterFolderPath( variable & o_str_TipCounterFolder ) void {
    private variable str_FileName;
    private variable str_SubFileName;
    o_str_TipCounterFolder = 0;
    o_str_TipCounterFolder = Translate("");
    str_SubFileName = Translate("");
    str_SubFileName = GetFileName();
    str_FileName = HSLExtensions::File::GetFileName(str_SubFileName);
    StrReplace(str_SubFileName, str_FileName, Translate(""));
    o_str_TipCounterFolder = StrConcat8(str_SubFileName, Translate("\\"), Translate("Resources"), Translate("\\"), Translate("TipCounters"), Translate("\\"), Translate(""), Translate(""));
    StrReplace(o_str_TipCounterFolder, Translate("\\"), Translate("\\\\"));
    HSLExtensions::Directory::Create(o_str_TipCounterFolder);
  }

  private function _RemoveInvalidCharacters( variable & io_str_Value ) void {
    StrReplace(io_str_Value, Translate(" "), Translate("_"));
    StrReplace(io_str_Value, Translate("."), Translate("_"));
    StrReplace(io_str_Value, Translate("-"), Translate("_"));
    StrReplace(io_str_Value, Translate("+"), Translate("_"));
    StrReplace(io_str_Value, Translate("@"), Translate("_"));
    StrReplace(io_str_Value, Translate("!"), Translate("_"));
    StrReplace(io_str_Value, Translate("#"), Translate("_"));
    StrReplace(io_str_Value, Translate("$"), Translate("_"));
    StrReplace(io_str_Value, Translate("%"), Translate("_"));
    StrReplace(io_str_Value, Translate("^"), Translate("_"));
    StrReplace(io_str_Value, Translate("&"), Translate("_"));
    StrReplace(io_str_Value, Translate("*"), Translate("_"));
    StrReplace(io_str_Value, Translate("("), Translate("_"));
    StrReplace(io_str_Value, Translate(")"), Translate("_"));
    StrReplace(io_str_Value, Translate("="), Translate("_"));
  }

  function TipTypeCheck1mL( device & ML_STAR, variable i_str_ReturnFromTipPickUp, sequence & o_seq_IncorrectTipReturn, variable & o_str_IncorrectChannels ) variable {
    private variable _strFunctionName;
    private variable int_Total1mLChannels;
    private variable int_TotalPositions;
    private variable int_CurrentAspirationMode;
    private variable str_LibraryFolderPath;
    private variable str_CenterSpotFilePath;
    private variable int_Position;
    private variable str_LabwareID;
    private variable arr_LabwareIDs[];
    private variable arr_PositionIDs[];
    private variable arr_TipTypes[];
    private variable int_ChannelIndex;
    private variable arr_Channel[];
    private variable str_PositionID;
    private variable int_TipType;
    private variable flt_ChCoord_Y;
    private variable flt_ChCoord_Z;
    private variable flt_ChCoord_X;
    private variable arr_TempLabware[];
    private variable str_TempLabwareID;
    private sequence seq_TempAspPosition;
    private variable int_TotalTempLabware;
    private variable str_ChannelPattern;
    private variable bln_SimulationMode;
    private variable flt_NotUsed;
    private variable str_LiquidClass;
    private variable str_ReturnAsp;
    private variable int_Recovery;
    private variable arr_TipCorrect[];
    private variable str_ChannelPattern_Return;
    private variable int_NumChanReturns;
    private variable int_RetryCheck;
    private sequence seq_TempReturnPositions;
    private variable bln_LabwareExists;
    private variable i;
    private variable ret_int_AllGood;
    private variable int_TADM_Mode;
    private variable flt_AspVolume;
    private variable arr_LiquidClasses[];
    private variable arr_AspVolumes[];
    { sequence __temp; o_seq_IncorrectTipReturn = __temp; }
    o_str_IncorrectChannels = 0;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::TRUE, BOOLEON::TRUE);
    ret_int_AllGood = -1;
    o_str_IncorrectChannels = Translate("");
    SeqRemoveAll(o_seq_IncorrectTipReturn);
    bln_SimulationMode = Util::GetSimulationMode();
    str_LibraryFolderPath = FilGetLibraryPath();
    str_CenterSpotFilePath = StrConcat4(str_LibraryFolderPath, Translate("\\STAR Tools\\Resources\\SubMethods\\"), Translate("CenterSpot"), Translate(".rck"));
    CHANNEL_QUERY_1ML::RequestAspirationMonitoringMode(ML_STAR, int_CurrentAspirationMode);
    if (int_CurrentAspirationMode == 0)
    {
      MECC::TraceComment(Translate("=========================================\nASPIRATION MONITORING IS MAD\n========================================="));
    }
    else
    {
      MECC::TraceComment(Translate("=========================================\nASPIRATION MONITORING IS TADM\n========================================="));
    }
    int_TADM_Mode = HSLExtensions::Venus::GetTadmMode(ML_STAR);
    if (int_TADM_Mode == 1)
    {
      MECC::TraceComment(Translate("=========================================\nTADM IS IN RECORDING MODE\n========================================="));
    }
    if (int_TADM_Mode == 2)
    {
      MECC::TraceComment(Translate("=========================================\nTADM IS IN MONITORING MODE\n========================================="));
    }
    Get1mLChannelCount(ML_STAR, int_Total1mLChannels);
    if(0){
      if (str_LiquidClass == "")
      {
        MECC::TraceComment(Translate("==========================================================\nTIP TYPE NOT COMPATIBLE WITH CHECK\n=========================================================="));
        TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
        return (ret_int_AllGood);
      }
    }
    arr_TempLabware.SetSize(0);
    {
      for(int_RetryCheck = 0; int_RetryCheck < 1;)
      {
        int_RetryCheck = int_RetryCheck + 1;
        arr_Channel.SetSize(int_Total1mLChannels);
        arr_LabwareIDs.SetSize(int_Total1mLChannels);
        arr_PositionIDs.SetSize(int_Total1mLChannels);
        arr_TipTypes.SetSize(int_Total1mLChannels);
        arr_LiquidClasses.SetSize(int_Total1mLChannels);
        arr_AspVolumes.SetSize(int_Total1mLChannels);
        arr_TipCorrect.SetSize(int_Total1mLChannels);
        SeqRemoveAll(seq_TempAspPosition);
        {
          for(int_ChannelIndex = 0; int_ChannelIndex < int_Total1mLChannels;)
          {
            int_ChannelIndex = int_ChannelIndex + 1;
            arr_Channel.SetAt(int_ChannelIndex-1, int_ChannelIndex);
            arr_LabwareIDs.SetAt(int_ChannelIndex-1, Translate(""));
            arr_PositionIDs.SetAt(int_ChannelIndex-1, Translate(""));
            arr_LiquidClasses.SetAt(int_ChannelIndex-1, Translate(""));
            arr_TipTypes.SetAt(int_ChannelIndex-1, -1);
            arr_TipCorrect.SetAt(int_ChannelIndex-1, 0);
            arr_AspVolumes.SetAt(int_ChannelIndex-1, 0);
          }
        }
        str_ChannelPattern = Translate("");
        int_TotalPositions = StepReturn::GetNumberOfPositions(i_str_ReturnFromTipPickUp);
        {
          for(int_ChannelIndex = 0; int_ChannelIndex < int_Total1mLChannels;)
          {
            int_ChannelIndex = int_ChannelIndex + 1;
            int_Position = StepReturn::GetPositionFromNum(int_ChannelIndex, i_str_ReturnFromTipPickUp);
            str_LabwareID = StepReturn::GetLabwareId(int_Position, i_str_ReturnFromTipPickUp);
            str_PositionID = StepReturn::GetPositionId(int_Position, i_str_ReturnFromTipPickUp);
            if (str_LabwareID != "")
            {
              _GetTipType(ML_STAR, str_LabwareID, int_TipType);
              arr_LabwareIDs.SetAt(int_ChannelIndex-1, str_LabwareID);
              arr_PositionIDs.SetAt(int_ChannelIndex-1, str_PositionID);
              arr_TipTypes.SetAt(int_ChannelIndex-1, int_TipType);
              _DetermineTipCheckLC(int_TipType, str_LiquidClass, flt_AspVolume);
              arr_LiquidClasses.SetAt(int_ChannelIndex-1, str_LiquidClass);
              arr_AspVolumes.SetAt(int_ChannelIndex-1, flt_AspVolume);
              if (bln_SimulationMode == BOOLEON::FALSE)
              {
                CHANNEL_QUERY_1ML::Get_Channel_Position(ML_STAR, int_ChannelIndex, flt_ChCoord_X, flt_ChCoord_Y, flt_ChCoord_Z);
              }
              else
              {
                DevGetLabwarePositionEx(ML_STAR, str_LabwareID, str_PositionID, flt_ChCoord_X, flt_ChCoord_Y, flt_NotUsed, flt_NotUsed);
                flt_ChCoord_Z = 245.0;
              }
              if(0){
                flt_ChCoord_Z = flt_ChCoord_Z - 1.0;
              }
              str_TempLabwareID = StrConcat12(int_ChannelIndex, Translate("_"), str_LabwareID, Translate("_"), str_PositionID, Translate("_"), int_TipType, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
              arr_TempLabware.AddAsLast(str_TempLabwareID);
              bln_LabwareExists = DevIsValidLabwareForCurrentDeckLayout(ML_STAR, str_TempLabwareID);
              if (bln_LabwareExists == BOOLEON::TRUE)
              {
                DevRemoveLabware(ML_STAR, str_TempLabwareID);
              }
              DevAddLabware(ML_STAR, str_TempLabwareID, str_CenterSpotFilePath, flt_ChCoord_X, flt_ChCoord_Y, flt_ChCoord_Z, 0.0);
              str_ChannelPattern = StrConcat2(str_ChannelPattern, Translate("1"));
              SeqAdd(seq_TempAspPosition, str_TempLabwareID, Translate("1"));
            }
            else
            {
              str_ChannelPattern = StrConcat2(str_ChannelPattern, Translate("0"));
            }
          }
        }
        seq_TempAspPosition.SetCurrentPosition(1);
        TRACE::TRACE02(Translate("Channel Pattern to check:  "), str_ChannelPattern);
        Util2::Debug::TraceArray_4(Translate("Channel   Tip Type      Labware ID      Position ID"), arr_Channel, arr_TipTypes, arr_LabwareIDs, arr_PositionIDs);
        int_TotalTempLabware=arr_TempLabware.GetSize();
        if (int_TotalTempLabware == 0)
        {
          MECC::TraceComment(Translate("==========================================================\nNO TIPS TO CHECK\n=========================================================="));
          TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
          return (ret_int_AllGood);
        }
        MECC::TraceComment(Translate("=========================================\nSET MODE TO TADM\n========================================="));
        CHANNEL_QUERY_1ML::SetAspirationMonitoringMode(ML_STAR, 1);
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          	str_ReturnAsp = arrRetValues[2];
        }
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        MECC::TraceComment(Translate("=========================================\nSET MODE BACK TO INITIAL SETTING\n========================================="));
        CHANNEL_QUERY_1ML::SetAspirationMonitoringMode(ML_STAR, int_CurrentAspirationMode);
        if(0){
          {
            for(int_ChannelIndex = 0; int_ChannelIndex < int_Total1mLChannels;)
            {
              int_ChannelIndex = int_ChannelIndex + 1;
              if (arr_LabwareIDs.ElementAt( int_ChannelIndex -1) != "")
              {
                CHANNEL_QUERY_1ML::InitializeDispenseDrive(ML_STAR, int_ChannelIndex);
              }
            }
          }
        }
        SeqRemoveAll(seq_TempReturnPositions);
        str_ChannelPattern_Return = Translate("");
        {
          for(int_ChannelIndex = 0; int_ChannelIndex < int_Total1mLChannels;)
          {
            int_ChannelIndex = int_ChannelIndex + 1;
            int_Position = StepReturn::GetPositionFromNum(int_ChannelIndex, str_ReturnAsp);
            int_Recovery = StepReturn::GetRecoveryButton(int_Position, str_ReturnAsp);
            if(0){
              if (bln_SimulationMode == BOOLEON::TRUE)
              {
                if (int_ChannelIndex == 2)
                {
                  int_Recovery = 9;
                }
              }
            }
            if (arr_LabwareIDs.ElementAt( int_ChannelIndex -1) != "")
            {
              if (int_Recovery != 9)
              {
                arr_TipCorrect.SetAt(int_ChannelIndex-1, 1);
                str_ChannelPattern_Return = StrConcat2(str_ChannelPattern_Return, Translate("0"));
              }
              else
              {
                str_ChannelPattern_Return = StrConcat2(str_ChannelPattern_Return, Translate("1"));
                SeqAdd(o_seq_IncorrectTipReturn, arr_LabwareIDs.ElementAt( int_ChannelIndex -1), arr_PositionIDs.ElementAt( int_ChannelIndex -1));
              }
            }
            else
            {
              str_ChannelPattern_Return = StrConcat2(str_ChannelPattern_Return, Translate("0"));
            }
          }
        }
        o_seq_IncorrectTipReturn.SetCurrentPosition(1);
        int_NumChanReturns = StrReplace(str_ChannelPattern_Return, Translate("1"), Translate("1"));
        o_str_IncorrectChannels = str_ChannelPattern_Return;
        if (int_NumChanReturns == 0)
        {
          MECC::TraceComment(Translate("--------------------------- TIPS CORRECT"));
          ret_int_AllGood = 1;
          break;
        }
        ret_int_AllGood = 0;
        MECC::TraceComment(Translate("--------------------------- WRONG TIPS DETECTED"));
        TRACE::TRACE02(Translate("Wrong channels detected:  "), o_str_IncorrectChannels);
        Util2::Debug::TraceSequence(o_seq_IncorrectTipReturn);
        DeckVisualize::UpdateUsedPositions(ML_STAR, o_seq_IncorrectTipReturn, 6, Translate("Make positions flash"));
      }
    }
    int_TotalTempLabware=arr_TempLabware.GetSize();
    {
      for(i = 0; i < int_TotalTempLabware;)
      {
        i = i + 1;
        DevRemoveLabware(ML_STAR, arr_TempLabware.ElementAt( i -1));
      }
    }
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
    return (ret_int_AllGood);
  }

  private function _DetermineTipCheckLC( variable i_int_TipType, variable & o_str_LiquidClass, variable & o_flt_CheckVolume ) void {
    o_str_LiquidClass = 0;
    o_flt_CheckVolume = 0;
    o_str_LiquidClass = Translate("");
    o_flt_CheckVolume = 0.0;
    if (i_int_TipType == 0)
    {
      o_str_LiquidClass = Translate("TipCheck_300");
      o_flt_CheckVolume = 50.0;
    }
    if (i_int_TipType == 1)
    {
      o_str_LiquidClass = Translate("TipCheck_300F");
      o_flt_CheckVolume = 50.0;
    }
    if (i_int_TipType == 4)
    {
      o_str_LiquidClass = Translate("TipCheck_1000");
      o_flt_CheckVolume = 100.0;
    }
    if (i_int_TipType == 5)
    {
      o_str_LiquidClass = Translate("TipCheck_1000F");
      o_flt_CheckVolume = 100.0;
    }
    if (i_int_TipType == 22)
    {
      o_str_LiquidClass = Translate("TipCheck_50");
      o_flt_CheckVolume = 50.0;
    }
    if (i_int_TipType == 23)
    {
      o_str_LiquidClass = Translate("TipCheck_50F");
      o_flt_CheckVolume = 50.0;
    }
    if (i_int_TipType == 23)
    {
      o_str_LiquidClass = Translate("TipCheck_50F");
      o_flt_CheckVolume = 50.0;
    }
    if (i_int_TipType == 36)
    {
      o_str_LiquidClass = Translate("TipCheck_300Slim");
      o_flt_CheckVolume = 100.0;
    }
    if (i_int_TipType == 45)
    {
      o_str_LiquidClass = Translate("TipCheck_300SlimF");
      o_flt_CheckVolume = 100.0;
    }
  }

  function GetTipType( device & Instrument, sequence i_seq_Tips, variable & o_int_TipType ) void {
    private variable str_LabID;
    private variable bln_LabwareValid;
    o_int_TipType = 0;
    o_int_TipType = -1;
    ResetInputSequence(Instrument, i_seq_Tips);
    str_LabID = SeqGetLabwareId(i_seq_Tips);
    bln_LabwareValid = DevIsValidLabwareForCurrentDeckLayout(Instrument, str_LabID);
    if (bln_LabwareValid == BOOLEON::TRUE)
    {
      _GetTipType(Instrument, str_LabID, o_int_TipType);
    }
  }

  function TipCountNeeded_Add( variable i_str_TipCounter, variable i_int_NumberOfTips ) void {
    private variable int_Index;
    private variable int_ExistingTipCount;
    private variable int_NewTipCountNeeded;
    if (TT_GLOBAL_VARIABLES::TIP_COUNT::LIBRARY_INITIALIZED == BOOLEON::FALSE)
    {
      TT_GLOBAL_VARIABLES::TIP_COUNT::InitializeVariables();
      TT_GLOBAL_VARIABLES::TIP_COUNT::TIP_COUNT_NEEDED.SetSize(0);
      TT_GLOBAL_VARIABLES::TIP_COUNT::TIP_COUNTER.SetSize(0);
      TT_GLOBAL_VARIABLES::TIP_COUNT::LIBRARY_INITIALIZED = BOOLEON::TRUE;
    }
    int_Index = _Lookup(TT_GLOBAL_VARIABLES::TIP_COUNT::TIP_COUNTER, i_str_TipCounter);
    if (int_Index == 0)
    {
      TT_GLOBAL_VARIABLES::TIP_COUNT::TIP_COUNTER.AddAsLast(i_str_TipCounter);
      TT_GLOBAL_VARIABLES::TIP_COUNT::TIP_COUNT_NEEDED.AddAsLast(i_int_NumberOfTips);
    }
    else
    {
      int_ExistingTipCount=TT_GLOBAL_VARIABLES::TIP_COUNT::TIP_COUNT_NEEDED.GetAt(int_Index-1);
      int_NewTipCountNeeded = int_ExistingTipCount + i_int_NumberOfTips;
      TT_GLOBAL_VARIABLES::TIP_COUNT::TIP_COUNT_NEEDED.SetAt(int_Index-1, int_NewTipCountNeeded);
    }
  }

  function TipCountNeeded_Get( variable i_str_TipCounter, variable & o_int_NumberOfTips ) void {
    private variable int_Index;
    private variable _strFunctionName;
    private variable l_blnSuccess;
    o_int_NumberOfTips = 0;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::TRUE, BOOLEON::TRUE);
    if (TT_GLOBAL_VARIABLES::TIP_COUNT::LIBRARY_INITIALIZED == BOOLEON::FALSE)
    {
      TT_GLOBAL_VARIABLES::TIP_COUNT::InitializeVariables();
      TT_GLOBAL_VARIABLES::TIP_COUNT::TIP_COUNT_NEEDED.SetSize(0);
      TT_GLOBAL_VARIABLES::TIP_COUNT::TIP_COUNTER.SetSize(0);
      TT_GLOBAL_VARIABLES::TIP_COUNT::LIBRARY_INITIALIZED = BOOLEON::TRUE;
    }
    int_Index = _Lookup(TT_GLOBAL_VARIABLES::TIP_COUNT::TIP_COUNTER, i_str_TipCounter);
    o_int_NumberOfTips = 0;
    if (int_Index == 0)
    {
      TT_GLOBAL_VARIABLES::TIP_COUNT::TIP_COUNTER.AddAsLast(i_str_TipCounter);
      TT_GLOBAL_VARIABLES::TIP_COUNT::TIP_COUNT_NEEDED.AddAsLast(o_int_NumberOfTips);
    }
    else
    {
      o_int_NumberOfTips=TT_GLOBAL_VARIABLES::TIP_COUNT::TIP_COUNT_NEEDED.GetAt(int_Index-1);
    }
    o_int_NumberOfTips = HSLExtensions::Core::ConvertToInteger(o_int_NumberOfTips, l_blnSuccess);
    TRACE::TRACE04(Translate("Tip Counter:  "), i_str_TipCounter, Translate("  --  Current Tips Needed:  "), o_int_NumberOfTips);
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
  }

  function TipTypeLength_Get( variable i_int_TipType, variable & o_flt_TipLength ) void {
    private variable bln_LengthFound;
    o_flt_TipLength = 0;
    bln_LengthFound = 0;
    o_flt_TipLength = 0.0;
    if (i_int_TipType == 0)
    {
      o_flt_TipLength = 51.9;
    }
    if (i_int_TipType == 1)
    {
      o_flt_TipLength = 51.9;
    }
    if (i_int_TipType == 30)
    {
      o_flt_TipLength = 51.9;
    }
    if (i_int_TipType == 2)
    {
      o_flt_TipLength = 21.9;
    }
    if (i_int_TipType == 3)
    {
      o_flt_TipLength = 21.9;
    }
    if (i_int_TipType == 32)
    {
      o_flt_TipLength = 21.9;
    }
    if (i_int_TipType == 4)
    {
      o_flt_TipLength = 87.1;
    }
    if (i_int_TipType == 5)
    {
      o_flt_TipLength = 87.1;
    }
    if (i_int_TipType == 10)
    {
      o_flt_TipLength = 51.9;
    }
    if (i_int_TipType == 22)
    {
      o_flt_TipLength = 42.4;
    }
    if (i_int_TipType == 23)
    {
      o_flt_TipLength = 42.4;
    }
    if (i_int_TipType == 31)
    {
      o_flt_TipLength = 42.4;
    }
    if (i_int_TipType == 36)
    {
      o_flt_TipLength = 87.0;
    }
    if (i_int_TipType == 45)
    {
      o_flt_TipLength = 87.0;
    }
  }

  function TipCheckMPH96( device & Instrument, sequence & io_seq_Tips, variable i_str_TipCounter ) void {
    private dialog customDialog_6;
    private variable int_CurrentPosition;
    private variable flt_TipCapacity;
    private variable str_TipMessage;
    private variable int_EndPosition;
    private variable int_PositionsRemaining;
    private variable str_TipName;
    private variable int_TipsNeeded;
    MECC::TraceComment(Translate("=========  Check tip sequence"));
    TipCapacityCheck(Instrument, io_seq_Tips, flt_TipCapacity);
    if (flt_TipCapacity == 0.0)
    {
      flt_TipCapacity = Translate("Unknown");
    }
    str_TipName = StrConcat4(flt_TipCapacity, Translate(" uL Tips"), Translate(""), Translate(""));
    str_TipMessage = StrConcat4(Translate("Please load more "), str_TipName, Translate(" on to the deck."), Translate(""));
    int_TipsNeeded = 96;
    {
      while (1 == 1)
      {
        int_CurrentPosition = io_seq_Tips.GetCurrentPosition();
        int_EndPosition = io_seq_Tips.GetCount();
        if (int_CurrentPosition == 0)
        {
          int_CurrentPosition = int_EndPosition + 1;
        }
        int_PositionsRemaining = int_EndPosition - int_CurrentPosition;
        int_PositionsRemaining = int_PositionsRemaining + 1;
        if (int_PositionsRemaining > 0)
        {
          int_PositionsRemaining = SeqGetPositionCountForCurrLabware(io_seq_Tips);
        }
        Trace("     ","Positions Remaining:  ",int_PositionsRemaining,"  Tips Needed:  ",int_TipsNeeded);
        if (int_PositionsRemaining >= int_TipsNeeded)
        {
          MECC::TraceComment(Translate("------------------  Sufficient tips found"));
          break;
        }
        MECC::TraceComment(Translate("------------------  Insufficient tips found"));
        customDialog_6.InitCustomDialog("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");
        customDialog_6.SetCustomDialogProperty( "textBlock2.Text", str_TipMessage );
        customDialog_6.ShowCustomDialog();
        ResetInputSequence(Instrument, io_seq_Tips);
        TipCounter_Edit(Instrument, io_seq_Tips, i_str_TipCounter, 99999);
      }
    }
  }

  private function _LocalTipCounterRead( device & ML_STAR, sequence & io_seq_TipSequence, variable i_str_TipCounter ) void {
    private variable bln_SimMode;
    private variable bln_FileExists;
    private variable str_TipCounterFolder;
    private variable str_TipCounter;
    TRACE::TRACE02(Translate("Read tip counter:  "), i_str_TipCounter);
    bln_SimMode = Util::GetSimulationMode();
    if (bln_SimMode == 1)
    {
      i_str_TipCounter = StrConcat2(Translate("SIM_"), i_str_TipCounter);
    }
    _GetTipCounterFolderPath(str_TipCounterFolder);
    _RemoveInvalidCharacters(i_str_TipCounter);
    str_TipCounter = StrConcat4(str_TipCounterFolder, i_str_TipCounter, Translate(".txt"), Translate(""));
    bln_FileExists = HSLExtensions::File::Exists(str_TipCounter);
    if (bln_FileExists == 0)
    {
      ResetInputSequence(ML_STAR, io_seq_TipSequence);
      TRACE::TRACE02(Translate("Now creating tip counter:  "), i_str_TipCounter);
    }
    else
    {
      SeqRemoveAll(io_seq_TipSequence);
      TRACE::TRACE02(Translate("Now reading tip counter:  "), i_str_TipCounter);
      {
           variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition;
           string str_Temp;
           file ReadTipCounter;
           ReadTipCounter.RemoveFields();
           ReadTipCounter.AddField("LAB_ID",str_LabID,hslString);
           ReadTipCounter.AddField("POS_ID",str_PosID,hslString);
           ReadTipCounter.SetExtendedProperties("HDR=YES");
           ReadTipCounter.SetExtendedProperties("Text");
           ReadTipCounter.SetDelimiter(hslTabDelimited);
           ReadTipCounter.Open(str_TipCounter, hslAppend);
           while(ReadTipCounter.Eof() == 0)
           {
                ReadTipCounter.ReadRecord();
                if(ML_STAR.IsValidLabwareForCurrentDeckLayout(str_LabID))
                {
                     io_seq_TipSequence.Add(str_LabID,str_PosID);
                }
           }
           ReadTipCounter.Close();
           ReadTipCounter.RemoveFields();
           io_seq_TipSequence.SetCurrentPosition(1);
      }
    }
  }

  function TipCounter_SetShow( device & ML_STAR, sequence & io_seq_TipSequence, variable i_str_TipCounter, variable i_int_TimeOut, variable i_int_StartPosition, variable i_int_EndPosition ) void {
    private variable _strFunctionName;
    private variable l_strSequenceName;
    private variable l_intTotalPositions;
    private variable l_intAvailable;
    private variable l_strError;
    private variable l_intTipType;
    private variable l_strInstrumentClass;
    private variable l_strLabID;
    private variable l_intEmptyCheck;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::TRUE, BOOLEON::TRUE);
    TIP_OFFSET_GLOBAL::INIT::InitializeVariables();
    TIP_COUNTER::InitTipCountingLibrary();
    i_str_TipCounter = StrConcat2(i_str_TipCounter, Translate(""));
    if (i_str_TipCounter == "")
    {
      l_strError = StrConcat4(Translate("Tip counter '"), i_str_TipCounter, Translate("' is invalid!"), Translate(""));
      ErrRaise(101, l_strError);
    }
    if(0){
      l_strLabID = SeqGetLabwareId(io_seq_TipSequence);
    }
    l_strLabID = Translate("");
    l_intEmptyCheck = io_seq_TipSequence.GetCurrentPosition();
    {
         sequence sequenceObj;
         ML_STAR.CopyResetSequence(io_seq_TipSequence.GetName(), sequenceObj);
         l_strLabID = sequenceObj.GetLabwareId();
         if(l_intEmptyCheck == 0) ML_STAR.CopyResetSequence(io_seq_TipSequence.GetName(), io_seq_TipSequence);
    }
    _GetSequenceName(ML_STAR, io_seq_TipSequence, l_strSequenceName, l_intTotalPositions);
    _GetTipType(ML_STAR, l_strLabID, l_intTipType);
    if (l_intTipType != -1)
    {
      TRACE::TRACE04(Translate("     Start and End position ::  "), i_int_StartPosition, Translate(" - "), i_int_EndPosition);
      l_strInstrumentClass = DevGetInstrumentName(ML_STAR);
      TIP_COUNTER::CheckTipCounterName(i_str_TipCounter);
      TRACE::TRACE02(Translate("Read tip counter:  "), i_str_TipCounter);
      TIP_COUNTER::CreateNewHxElementCounter(io_seq_TipSequence, l_intTipType, i_str_TipCounter, l_strInstrumentClass);
      TIP_COUNTER::ReadFromHxElementCounter(ML_STAR, io_seq_TipSequence, l_intTipType, i_str_TipCounter, l_strInstrumentClass);
      TIP_COUNTER::EditSequence2(ML_STAR, io_seq_TipSequence, BOOLEON::FALSE, i_int_StartPosition, i_int_EndPosition, i_int_TimeOut);
      TIP_COUNTER::WriteHxElementCounter(io_seq_TipSequence, l_intTipType, i_str_TipCounter, l_strInstrumentClass);
      l_intAvailable = SeqGetTotal(io_seq_TipSequence);
      TRACE::TRACE08(l_strSequenceName, Translate(" :: "), l_intAvailable, Translate(" / "), l_intTotalPositions, Translate(""), Translate(""), Translate(""));
      DeckVisualize::UpdateUsedPositions(ML_STAR, io_seq_TipSequence, 5, Translate(""));
    }
    else
    {
      MECC::TraceComment(Translate("COULD NOT DETERMINE TIP TYPE!"));
    }
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
  }

  private function _ConvertToInteger( variable & io_Value ) void {
    io_Value = StrConcat2(io_Value, Translate(""));
    io_Value = StrIVal(io_Value);
  }

  function Optimized1mLTipPickup( device & ML_STAR, sequence & io_seq_TipSequence, sequence i_seq_ControlSequence, variable i_str_TipCounter, variable & o_str_ChannelPattern ) void {
    private variable _strFunctionName;
    private variable flt_YRaster;
    private variable int_TotalPositionsRemaining;
    private variable bool_FileExists;
    private variable str_TempSortingFilePath;
    private variable int_TotalChannels;
    private variable int_TipsNeeded;
    private sequence seq_RemainingSequence;
    private variable arr_YMin[];
    private variable arr_YMax[];
    private file WriteFile;
    private variable bln_Used;
    private file SortFile;
    private variable arr_GroupedLabID[];
    private variable arr_GroupedXCoords[];
    private variable arr_GroupedCounts[];
    private variable int_TotalOptions;
    private file UpdateFile;
    private variable arr_GroupNumber[];
    private variable int_SeqIndex;
    private variable str_LabID;
    private variable str_PosID;
    private variable flt_NotUsed;
    private variable flt_CurrentX;
    private variable flt_CurrentY;
    private variable flt_TargetX;
    private variable flt_PreviousY;
    private variable bln_OptimizationNeeded;
    private variable bln_EnoughTipsLoaded;
    private dialog customDialog_7;
    private variable str_TipMessage;
    private variable flt_TipCapacity;
    private variable str_TipName;
    o_str_ChannelPattern = 0;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::TRUE, BOOLEON::TRUE);
    o_str_ChannelPattern = Translate("");
    Get1mLChannelCount(ML_STAR, int_TotalChannels);
    HELPERLIBRARY::GetChannelLimits(ML_STAR, 0, arr_YMax, arr_YMin, flt_YRaster);
    HELPERLIBRARY::RemoveTruncatedSequencePositions(ML_STAR, i_seq_ControlSequence);
    int_TotalPositionsRemaining = SeqGetTotal(i_seq_ControlSequence);
    int_TipsNeeded = int_TotalPositionsRemaining;
    if (int_TipsNeeded > int_TotalChannels)
    {
      int_TipsNeeded = int_TotalChannels;
    }
    if (int_TipsNeeded == 0)
    {
      TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
      return;
    }
    {
      while (BOOLEON::TRUE == BOOLEON::TRUE)
      {
        TipCheck(ML_STAR, io_seq_TipSequence, i_str_TipCounter, int_TipsNeeded);
        SeqCopySequence(seq_RemainingSequence, io_seq_TipSequence);
        HELPERLIBRARY::RemoveTruncatedSequencePositions(ML_STAR, seq_RemainingSequence);
        if(0){
          _SortSequenceYPriority(ML_STAR, seq_RemainingSequence);
        }
        HELPERLIBRARY::GetTempSortingFilePath(str_TempSortingFilePath);
        bool_FileExists = HSLExtensions::File::Exists(str_TempSortingFilePath);
        if (bool_FileExists == 1)
        {
          HSLExtensions::File::Delete(str_TempSortingFilePath);
        }
        BuildChannelPattern(int_TipsNeeded, int_TotalChannels, o_str_ChannelPattern);
        bln_OptimizationNeeded = BOOLEON::FALSE;
        {
          for(int_SeqIndex = 0; int_SeqIndex < int_TipsNeeded;)
          {
            int_SeqIndex = int_SeqIndex + 1;
            str_LabID = SeqGetLabwareId(seq_RemainingSequence);
            str_PosID = SeqGetPositionId(seq_RemainingSequence);
            SeqIncrement(seq_RemainingSequence, 1);
            DevGetLabwarePositionEx(ML_STAR, str_LabID, str_PosID, flt_CurrentX, flt_CurrentY, flt_NotUsed, flt_NotUsed);
            if (flt_CurrentY <= arr_YMax.ElementAt( int_SeqIndex -1))
            {
              if (flt_CurrentY >= arr_YMin.ElementAt( int_SeqIndex -1))
              {
                if (int_SeqIndex == 1)
                {
                  flt_TargetX = flt_CurrentX;
                  flt_PreviousY = flt_CurrentY;
                }
                else
                {
                  if (flt_CurrentX != flt_TargetX)
                  {
                    bln_OptimizationNeeded = BOOLEON::TRUE;
                    break;
                  }
                  if (flt_CurrentY >= flt_PreviousY)
                  {
                    bln_OptimizationNeeded = BOOLEON::TRUE;
                    break;
                  }
                  flt_PreviousY = flt_CurrentY;
                }
              }
              else
              {
                bln_OptimizationNeeded = BOOLEON::TRUE;
                break;
              }
            }
            else
            {
              bln_OptimizationNeeded = BOOLEON::TRUE;
              break;
            }
          }
        }
        seq_RemainingSequence.SetCurrentPosition(1);
        if (bln_OptimizationNeeded == BOOLEON::TRUE)
        {
          bool_FileExists = HSLExtensions::File::Exists(str_TempSortingFilePath);
          if (bool_FileExists == 1)
          {
            HSLExtensions::File::Delete(str_TempSortingFilePath);
          }
          HELPERLIBRARY::SortSequence(ML_STAR, seq_RemainingSequence, BOOLEON::FALSE);
          {
               variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition,int_FilledLocation,int_Position,flt_X_Coord,flt_Y_Coord,flt_Z_Coord,flt_NotUsed;
               variable int_PositionCount, int_Group, int_ChannelIndex, flt_CurrentX;
               WriteFile.RemoveFields();
               WriteFile.AddField("INDEX", int_PositionCount, hslInteger);
               WriteFile.AddField("USED", bln_Used, hslInteger);
               WriteFile.AddField("LAB_ID", str_LabID, hslString, 255);
               WriteFile.AddField("POS_ID", str_PosID, hslString, 255);
               WriteFile.AddField("X_COORD", flt_X_Coord, hslFloat);
               WriteFile.AddField("Y_COORD", flt_Y_Coord, hslFloat);
               WriteFile.AddField("Z_COORD", flt_Z_Coord, hslFloat);
               WriteFile.AddField("GROUP",int_Group,hslInteger);
               int_TotalValues = seq_RemainingSequence.GetTotal();
               WriteFile.SetExtendedProperties("HDR=YES");
               WriteFile.Open(str_TempSortingFilePath + " " + "SORT", hslWrite);
               int_PositionCount = 1;
               int_Group = 0;
               flt_CurrentX = -100.0;
               for(i = 0; i < int_TotalValues;)
               {
                    i = i + 1;
                    int_ChannelIndex = int_ChannelIndex + 1;
                    seq_RemainingSequence.SetCurrentPosition(i);
                    str_LabID = seq_RemainingSequence.GetLabwareId();
                    str_PosID = seq_RemainingSequence.GetPositionId();
                    DevGetLabwarePositionEx(ML_STAR, str_LabID, str_PosID, flt_X_Coord, flt_Y_Coord, flt_Z_Coord, flt_NotUsed);
                    if(flt_CurrentX != flt_X_Coord)
                    {
                         flt_CurrentX = flt_X_Coord;
                         int_Group = int_Group + 1;
                         int_ChannelIndex = 1;
                    }
                    if(int_ChannelIndex > int_TotalChannels)
                    {
                         int_ChannelIndex = 1;
                         flt_CurrentX = flt_X_Coord;
                         int_Group = int_Group + 1;
                    }
                    WriteFile.WriteRecord();
                    int_PositionCount = int_PositionCount + 1;
               }
               WriteFile.Close();
               WriteFile.RemoveFields();
          }
          if(0){
            arr_GroupedLabID.SetSize(0);
            arr_GroupedXCoords.SetSize(0);
          }
          arr_GroupNumber.SetSize(0);
          arr_GroupedCounts.SetSize(0);
          {
               variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition,int_FilledLocation,int_Position,flt_X_Coord,flt_Y_Coord,flt_Z_Coord,flt_NotUsed;
               variable int_PositionCount, int_Count, str_SQL, int_Group;
            SortFile.RemoveFields();
                  //str_SQL = "SELECT [GROUP], Y_COORD, COUNT(*) AS N FROM (SELECT * FROM SORT ORDER BY Y_COORD DESC, X_COORD ASC) GROUP BY [GROUP], Y_COORD ORDER BY Y_COORD DESC";
                  str_SQL = "SELECT [GROUP], N FROM (SELECT [GROUP], COUNT(*) AS N FROM SORT GROUP BY [GROUP]) ORDER BY [GROUP] ASC";
                  //SortFile.AddField("LAB_ID", str_LabID, hslString, 255);
                  SortFile.AddField("GROUP", int_Group, hslFloat);
                  SortFile.AddField("N", int_Count, hslInteger);
                  int_TotalValues = seq_RemainingSequence.GetTotal();
                  SortFile.SetExtendedProperties("HDR=YES");
                  SortFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
                  str_LabID = "";
                  flt_Y_Coord = 0.0;
                  while(SortFile.Eof() == 0)
                  {
                       SortFile.ReadRecord();
                       arr_GroupNumber.AddAsLast(int_Group);
                       arr_GroupedCounts.AddAsLast(int_Count);
                  }
                  SortFile.Close();
                  SortFile.RemoveFields();
          }
          int_TotalOptions=arr_GroupedCounts.GetSize();
          if(0){
            Util2::Debug::TraceArray_2(Translate("Counts           Group"), arr_GroupedCounts, arr_GroupNumber);
            Util2::Debug::TraceArray_3(Translate("Counts     Lab          X"), arr_GroupedCounts, arr_GroupedLabID, arr_GroupedXCoords);
          }
          {
               variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition,int_FilledLocation,int_Position,flt_X_Coord,flt_Y_Coord,flt_Z_Coord,flt_NotUsed;
               variable int_PositionCount, int_Count, str_SQL, bln_UseOptimization, int_Index, str_InValue, flt_XCoord, int_Group, a, int_ChannelCount, int_UpdateCount;
               bln_UseOptimization = hslFalse;
               SortFile.RemoveFields();
               SortFile.AddField("INDEX", int_Index, hslInteger);
               SortFile.AddField("LAB_ID", str_LabID, hslString, 255);
               SortFile.AddField("X_COORD", flt_X_Coord, hslFloat);
               SortFile.AddField("Y_COORD", flt_X_Coord, hslFloat);
               SortFile.AddField("GROUP", int_Group, hslInteger);
               str_SQL = "SELECT INDEX, LAB_ID, X_COORD, Y_COORD, [GROUP] FROM SORT ORDER BY LAB_ID ASC, Y_COORD DESC, X_COORD ASC";
               SortFile.SetExtendedProperties("HDR=YES");
               SortFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
               while(SortFile.Eof() == 0)
               {
                    SortFile.ReadRecord();
                    //Util::Lookup(arr_GroupedCounts,int_Group,a);
                    //Trace("Group:  ", int_Group,"  Count:  ",arr_GroupedCounts.GetAt(int_Group-1),"  Tips needed:  ",int_TipsNeeded);
                    if(arr_GroupedCounts.GetAt(int_Group-1) >= int_TipsNeeded)
                    {
                         int_Group = StrConcat2(int_Group,"");
                         bln_UseOptimization = hslTrue;
                         break;
                    }
               }
               //int_Index = StrConcat2(int_Index,"");
               SortFile.Close();
               SortFile.RemoveFields();
            //Trace("Lab ID:  ",str_LabID,"  X Coord:  ",flt_XCoord);
            //Trace("Group:  ",int_Group);
            //Trace("Use Optimization:  ",bln_UseOptimization);
            if(bln_UseOptimization == hslTrue)
            {
                 str_SQL = "SELECT INDEX, LAB_ID, POS_ID, X_COORD, Y_COORD, [GROUP] FROM SORT WHERE [GROUP] = " + int_Group + " ORDER BY X_COORD ASC, Y_COORD DESC";
                 SortFile.RemoveFields();
                 SortFile.AddField("INDEX", int_Index, hslInteger);
                 SortFile.AddField("LAB_ID", str_LabID, hslString, 255);
                 SortFile.AddField("X_COORD", flt_X_Coord, hslFloat);
                 SortFile.AddField("Y_COORD", flt_X_Coord, hslFloat);
                 SortFile.AddField("GROUP",int_Group, hslInteger);
                 SortFile.SetExtendedProperties("HDR=YES");
                 SortFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
                 i = 0;
                 str_InValue = "(";
                 while(SortFile.Eof() == 0)
                 {
                      i = i + 1;
                      if(i > int_TipsNeeded) break;
                      SortFile.ReadRecord();
                      if(i > 1) str_InValue = str_InValue + ", ";
                      str_InValue = StrConcat2(str_InValue , int_Index);
                 }
                 str_InValue = str_InValue + ")";
                 SortFile.Close();
                 SortFile.RemoveFields();
                 UpdateFile.RemoveFields();
                 str_SQL = "UPDATE SORT SET USED = 2 WHERE INDEX IN" + str_InValue;
              //Trace(str_SQL);
                 UpdateFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
                 UpdateFile.Close();
                 UpdateFile.RemoveFields();
            }
            else
            {
                 str_SQL = "SELECT INDEX, LAB_ID, POS_ID, X_COORD, Y_COORD FROM SORT ORDER BY X_COORD ASC, Y_COORD DESC";
                 SortFile.RemoveFields();
                 SortFile.AddField("INDEX", int_Index, hslInteger);
                 SortFile.AddField("LAB_ID", str_LabID, hslString, 255);
                 SortFile.AddField("X_COORD", flt_X_Coord, hslFloat);
                 SortFile.AddField("Y_COORD", flt_Y_Coord, hslFloat);
                 SortFile.SetExtendedProperties("HDR=YES");
                 SortFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
                    i = 0;
                 str_InValue = "(";
                 int_ChannelCount = 1;
                 int_UpdateCount = 0;
                 while(SortFile.Eof() == 0)
                 {
                      SortFile.ReadRecord();
                      i = i + 1;
                      if(int_ChannelCount > int_TipsNeeded) break;
                      if(flt_Y_Coord <= arr_YMax.GetAt(int_ChannelCount-1))
                      {
                           if(flt_Y_Coord >= arr_YMin.GetAt(int_ChannelCount-1))
                           {
                                if(int_ChannelCount > 1) str_InValue = str_InValue + ", ";
                                str_InValue = StrConcat2(str_InValue , int_Index);
                                int_ChannelCount = int_ChannelCount + 1;
                                int_UpdateCount = int_UpdateCount + 1;
                           }
                      }
                 }
                 str_InValue = str_InValue + ")";
                 SortFile.Close();
                 SortFile.RemoveFields();
                 if(int_UpdateCount>0)
                 {
                      UpdateFile.RemoveFields();
                      str_SQL = "UPDATE SORT SET USED = 2 WHERE INDEX IN" + str_InValue;
                      UpdateFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
                      UpdateFile.Close();
                      UpdateFile.RemoveFields();
                 }
            }
          }
          SeqRemoveAll(io_seq_TipSequence);
          {
               variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition,int_FilledLocation,int_Position,flt_X_Coord,flt_Y_Coord,flt_Z_Coord,flt_NotUsed;
               variable int_PositionCount, int_Count, str_SQL;
               SortFile.RemoveFields();
               str_SQL = "SELECT USED, LAB_ID, POS_ID FROM SORT ORDER BY USED DESC, LAB_ID ASC, X_COORD ASC, Y_COORD DESC";
               SortFile.AddField("USED", bln_Used, hslInteger);
               SortFile.AddField("LAB_ID", str_LabID, hslString, 255);
               SortFile.AddField("POS_ID", str_PosID, hslString, 255);
               SortFile.SetExtendedProperties("HDR=YES");
               SortFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
               while(SortFile.Eof() == 0)
               {
                    SortFile.ReadRecord();
                    SeqAdd(io_seq_TipSequence, Translate(str_LabID), Translate(str_PosID));
               }
               SortFile.Close();
               SortFile.RemoveFields();
          }
          io_seq_TipSequence.SetCurrentPosition(1);
          bln_EnoughTipsLoaded = BOOLEON::TRUE;
          {
               variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition,int_FilledLocation,int_Position,flt_X_Coord,flt_Y_Coord,flt_Z_Coord,flt_NotUsed;
               variable int_PositionCount, int_Count, str_SQL;
               SortFile.RemoveFields();
               str_SQL = "SELECT COUNT(*) AS N FROM SORT WHERE USED = 2";
               SortFile.AddField("N", int_Count, hslInteger);
               SortFile.SetExtendedProperties("HDR=YES");
               SortFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
               SortFile.ReadRecord();
               SortFile.Close();
               SortFile.RemoveFields();
               if(int_Count < int_TipsNeeded) bln_EnoughTipsLoaded = hslFalse;
          }
          if (bln_EnoughTipsLoaded == BOOLEON::FALSE)
          {
            MECC::TraceComment(Translate("------------------  Insufficient tips found"));
            TipCapacityCheck(ML_STAR, io_seq_TipSequence, flt_TipCapacity);
            if (flt_TipCapacity == 0.0)
            {
              flt_TipCapacity = Translate("Unknown");
            }
            str_TipName = StrConcat4(flt_TipCapacity, Translate(" uL Tips"), Translate(""), Translate(""));
            str_TipMessage = StrConcat4(Translate("Please load more "), str_TipName, Translate(" on to the deck."), Translate(""));
            customDialog_7.InitCustomDialog("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");
            customDialog_7.SetCustomDialogProperty( "textBlock2.Text", str_TipMessage );
            customDialog_7.ShowCustomDialog();
            ResetInputSequence(ML_STAR, io_seq_TipSequence);
            TipCounter_Edit(ML_STAR, io_seq_TipSequence, i_str_TipCounter, 99999);
          }
          else
          {
            break;
          }
        }
        else
        {
          break;
        }
      }
    }
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
  }

  private function _SortSequenceYPriority( device & Instrument, sequence & io_Sequence ) void {
    private variable str_TempSortingFilePath;
    private variable str_SQL_Sort;
    HELPERLIBRARY::GetTempSortingFilePath(str_TempSortingFilePath);
    str_SQL_Sort = StrConcat4(Translate("SELECT * FROM SORT ORDER BY Y_COORD DESC, X_COORD ASC"), Translate(""), Translate(""), Translate(""));
    {
         variable int_CurrentPosition;
         variable int_TotalSequencePositions;
         sequence seq_AdjustedSequence;
         variable i;
         file WriteFile;
         file ReadFile;
         variable str_LabID;
         variable str_PosID;
         variable flt_X;
         variable flt_Y;
         variable arr_Coordinates[];
         int_CurrentPosition = io_Sequence.GetCurrentPosition();
         seq_AdjustedSequence.CopySequence(io_Sequence);
         int_TotalSequencePositions = io_Sequence.GetTotal();
         SeqRemoveAll(io_Sequence);
         WriteFile.RemoveFields();
         WriteFile.AddField("LAB_ID", str_LabID, hslString, 255);
         WriteFile.AddField("POS_ID", str_PosID, hslString, 255);
         WriteFile.AddField("X_COORD", flt_X, hslFloat);
         WriteFile.AddField("Y_COORD", flt_Y, hslFloat);
         if(WriteFile.Open(str_TempSortingFilePath + " " + "SORT", hslWrite))
         {
              for(i = int_CurrentPosition; i <= int_TotalSequencePositions;)
              {
                   if(int_CurrentPosition == 0) break;
                   seq_AdjustedSequence.SetCurrentPosition(i);
                   if(seq_AdjustedSequence.GetLabwareId() != "" && seq_AdjustedSequence.GetPositionId() != "")
                   {
                        str_LabID = seq_AdjustedSequence.GetLabwareId();
                        str_PosID = seq_AdjustedSequence.GetPositionId();
                        Instrument.GetLabwarePosition(str_LabID, arr_Coordinates, str_PosID);
                        flt_X = arr_Coordinates[0];
                        flt_Y = arr_Coordinates[1];
                        WriteFile.WriteRecord();
                   }
                   i = i + 1;
              }
         }
         WriteFile.Close();
         WriteFile.RemoveFields();
         ReadFile.RemoveFields();
         ReadFile.AddField("LAB_ID", str_LabID, hslString, 255);
         ReadFile.AddField("POS_ID", str_PosID, hslString, 255);
         ReadFile.AddField("X_COORD", flt_X, hslFloat);
         ReadFile.AddField("Y_COORD", flt_Y, hslFloat);
         if(ReadFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead, str_SQL_Sort))
         {
              while(ReadFile.Eof() == 0)
              {
                   ReadFile.ReadRecord();
                   io_Sequence.Add(str_LabID,str_PosID);
              }
         }
         else
         {
              Trace("ERROR OCCURRED DURING SORT");
              io_Sequence.CopySequence(seq_AdjustedSequence);
         }
         ReadFile.Close();
         ReadFile.RemoveFields();
         io_Sequence.SetCurrentPosition(1);
    }
  }

  function Optimized1mLTipPickup2( device & ML_STAR, sequence & io_seq_TipSequence, variable i_str_TipCounter, variable i_str_ChannelPattern ) void {
    private dialog customDialog_8;
    private variable flt_NotUsed;
    private variable flt_CurrentX;
    private variable flt_TipCapacity;
    private variable flt_CurrentY;
    private variable int_TotalOptions;
    private variable flt_YRaster;
    private variable _strFunctionName;
    private variable bln_OptimizationNeeded;
    private variable str_LabID;
    private variable bool_FileExists;
    private variable str_TipMessage;
    private variable flt_PreviousY;
    private variable str_TempSortingFilePath;
    private variable flt_TargetX;
    private variable int_TotalChannels;
    private variable str_PosID;
    private variable int_TipsNeeded;
    private variable bln_EnoughTipsLoaded;
    private variable str_TipName;
    private sequence seq_RemainingSequence;
    private variable arr_GroupedXCoords[];
    private variable arr_GroupNumber[];
    private variable arr_YMin[];
    private variable arr_YMax[];
    private variable arr_GroupedCounts[];
    private variable arr_GroupedLabID[];
    private file WriteFile;
    private file SortFile;
    private file UpdateFile;
    private variable int_ChannelIndex;
    private variable str_Value;
    private variable int_ChannelValue;
    private variable arr_ChannelPattern[];
    private variable int_ChannelSet;
    private variable int_ChannelActive;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::TRUE, BOOLEON::TRUE);
    Get1mLChannelCount(ML_STAR, int_TotalChannels);
    HELPERLIBRARY::GetChannelLimits(ML_STAR, 0, arr_YMax, arr_YMin, flt_YRaster);
    int_TipsNeeded = StrReplace(i_str_ChannelPattern, Translate("1"), Translate("1"));
    i_str_ChannelPattern = StrFillRight(i_str_ChannelPattern, Translate("0"), int_TotalChannels);
    arr_ChannelPattern.SetSize(0);
    {
      for(int_ChannelIndex = 0; int_ChannelIndex < int_TotalChannels;)
      {
        int_ChannelIndex = int_ChannelIndex + 1;
        str_Value = StrLeft(i_str_ChannelPattern, int_ChannelIndex);
        str_Value = StrRight(str_Value, 1);
        int_ChannelValue = StrIVal(str_Value);
        arr_ChannelPattern.AddAsLast(int_ChannelValue);
      }
    }
    if (int_TipsNeeded == 0)
    {
      TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
      return;
    }
    {
      while (BOOLEON::TRUE == BOOLEON::TRUE)
      {
        TipCheck(ML_STAR, io_seq_TipSequence, i_str_TipCounter, int_TipsNeeded);
        SeqCopySequence(seq_RemainingSequence, io_seq_TipSequence);
        HELPERLIBRARY::RemoveTruncatedSequencePositions(ML_STAR, seq_RemainingSequence);
        HELPERLIBRARY::GetTempSortingFilePath(str_TempSortingFilePath);
        bool_FileExists = HSLExtensions::File::Exists(str_TempSortingFilePath);
        if (bool_FileExists == 1)
        {
          HSLExtensions::File::Delete(str_TempSortingFilePath);
        }
        bln_OptimizationNeeded = BOOLEON::FALSE;
        int_ChannelSet = 1;
        {
          for(int_ChannelIndex = 0; int_ChannelIndex < int_TotalChannels;)
          {
            int_ChannelIndex = int_ChannelIndex + 1;
            int_ChannelActive=arr_ChannelPattern.GetAt(int_ChannelIndex-1);
            if (int_ChannelActive == 1)
            {
              str_LabID = SeqGetLabwareId(seq_RemainingSequence);
              str_PosID = SeqGetPositionId(seq_RemainingSequence);
              SeqIncrement(seq_RemainingSequence, 1);
              DevGetLabwarePositionEx(ML_STAR, str_LabID, str_PosID, flt_CurrentX, flt_CurrentY, flt_NotUsed, flt_NotUsed);
              if (flt_CurrentY <= arr_YMax.ElementAt( int_ChannelIndex -1))
              {
                if (flt_CurrentY >= arr_YMin.ElementAt( int_ChannelIndex -1))
                {
                  if (int_ChannelSet == 1)
                  {
                    flt_TargetX = flt_CurrentX;
                    flt_PreviousY = flt_CurrentY;
                    int_ChannelSet = int_ChannelSet + 1;
                  }
                  else
                  {
                    if (flt_CurrentX != flt_TargetX)
                    {
                      bln_OptimizationNeeded = BOOLEON::TRUE;
                      break;
                    }
                    if (flt_CurrentY > flt_PreviousY)
                    {
                      bln_OptimizationNeeded = BOOLEON::TRUE;
                      break;
                    }
                    int_ChannelSet = int_ChannelSet + 1;
                  }
                }
                else
                {
                  bln_OptimizationNeeded = BOOLEON::TRUE;
                  break;
                }
              }
              else
              {
                bln_OptimizationNeeded = BOOLEON::TRUE;
                break;
              }
            }
            if(0){
              TRACE::TRACE06(Translate("Channel Active:  "), int_ChannelActive, Translate("  Previous Y:  "), flt_PreviousY, Translate("  Current X:  "), flt_CurrentX);
            }
            flt_PreviousY = flt_PreviousY - flt_YRaster;
          }
        }
        seq_RemainingSequence.SetCurrentPosition(1);
        if (bln_OptimizationNeeded == BOOLEON::TRUE)
        {
          MECC::TraceComment(Translate("OPTIMIZE NEEDED!"));
          bool_FileExists = HSLExtensions::File::Exists(str_TempSortingFilePath);
          if (bool_FileExists == 1)
          {
            HSLExtensions::File::Delete(str_TempSortingFilePath);
          }
          HELPERLIBRARY::SortSequence(ML_STAR, seq_RemainingSequence, BOOLEON::FALSE);
          {
               variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition,int_FilledLocation,int_Position,flt_X_Coord,flt_Y_Coord,flt_Z_Coord,flt_NotUsed;
               variable int_PositionCount, int_Group, int_ChannelIndex, flt_CurrentX, bln_Used;
               WriteFile.RemoveFields();
               WriteFile.AddField("INDEX", int_PositionCount, hslInteger);
               WriteFile.AddField("USED", bln_Used, hslInteger);
               WriteFile.AddField("LAB_ID", str_LabID, hslString, 255);
               WriteFile.AddField("POS_ID", str_PosID, hslString, 255);
               WriteFile.AddField("X_COORD", flt_X_Coord, hslFloat);
               WriteFile.AddField("Y_COORD", flt_Y_Coord, hslFloat);
               WriteFile.AddField("Z_COORD", flt_Z_Coord, hslFloat);
               WriteFile.AddField("GROUP",int_Group,hslInteger);
               int_TotalValues = seq_RemainingSequence.GetTotal();
               WriteFile.SetExtendedProperties("HDR=YES");
               WriteFile.Open(str_TempSortingFilePath + " " + "SORT", hslWrite);
               int_PositionCount = 1;
               int_Group = 0;
               flt_CurrentX = -100.0;
               for(i = 0; i < int_TotalValues;)
               {
                    i = i + 1;
                    int_ChannelIndex = int_ChannelIndex + 1;
                    seq_RemainingSequence.SetCurrentPosition(i);
                    str_LabID = seq_RemainingSequence.GetLabwareId();
                    str_PosID = seq_RemainingSequence.GetPositionId();
                    DevGetLabwarePositionEx(ML_STAR, str_LabID, str_PosID, flt_X_Coord, flt_Y_Coord, flt_Z_Coord, flt_NotUsed);
                    if(flt_CurrentX != flt_X_Coord)
                    {
                         flt_CurrentX = flt_X_Coord;
                         int_Group = int_Group + 1;
                         int_ChannelIndex = 1;
                    }
                    if(int_ChannelIndex > int_TotalChannels)
                    {
                         int_ChannelIndex = 1;
                         flt_CurrentX = flt_X_Coord;
                         int_Group = int_Group + 1;
                    }
                    WriteFile.WriteRecord();
                    int_PositionCount = int_PositionCount + 1;
               }
               WriteFile.Close();
               WriteFile.RemoveFields();
          }
          if(0){
            arr_GroupedLabID.SetSize(0);
            arr_GroupedXCoords.SetSize(0);
          }
          arr_GroupNumber.SetSize(0);
          arr_GroupedCounts.SetSize(0);
          {
               variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition,int_FilledLocation,int_Position,flt_X_Coord,flt_Y_Coord,flt_Z_Coord,flt_NotUsed;
               variable int_PositionCount, int_Count, str_SQL, int_Group;
            SortFile.RemoveFields();
                  //str_SQL = "SELECT [GROUP], Y_COORD, COUNT(*) AS N FROM (SELECT * FROM SORT ORDER BY Y_COORD DESC, X_COORD ASC) GROUP BY [GROUP], Y_COORD ORDER BY Y_COORD DESC";
                  str_SQL = "SELECT [GROUP], N FROM (SELECT [GROUP], COUNT(*) AS N FROM SORT GROUP BY [GROUP]) ORDER BY [GROUP] ASC";
                  //SortFile.AddField("LAB_ID", str_LabID, hslString, 255);
                  SortFile.AddField("GROUP", int_Group, hslFloat);
                  SortFile.AddField("N", int_Count, hslInteger);
                  int_TotalValues = seq_RemainingSequence.GetTotal();
                  SortFile.SetExtendedProperties("HDR=YES");
                  SortFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
                  str_LabID = "";
                  flt_Y_Coord = 0.0;
                  while(SortFile.Eof() == 0)
                  {
                       SortFile.ReadRecord();
                       arr_GroupNumber.AddAsLast(int_Group);
                       arr_GroupedCounts.AddAsLast(int_Count);
                  }
                  SortFile.Close();
                  SortFile.RemoveFields();
          }
          int_TotalOptions=arr_GroupedCounts.GetSize();
          if(0){
            Util2::Debug::TraceArray_2(Translate("Counts           Group"), arr_GroupedCounts, arr_GroupNumber);
            Util2::Debug::TraceArray_3(Translate("Counts     Lab          X"), arr_GroupedCounts, arr_GroupedLabID, arr_GroupedXCoords);
          }
          {
               variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition,int_FilledLocation,int_Position,flt_X_Coord,flt_Y_Coord,flt_Z_Coord,flt_NotUsed;
               variable int_PositionCount, int_Count, str_SQL, bln_UseOptimization, int_Index, str_InValue, flt_XCoord, int_Group, a, int_ChannelCount, int_UpdateCount, int_ChannelIndex;
               variable flt_PreviousY;
               bln_UseOptimization = hslFalse;
               SortFile.RemoveFields();
               SortFile.AddField("INDEX", int_Index, hslInteger);
               SortFile.AddField("LAB_ID", str_LabID, hslString, 255);
               SortFile.AddField("X_COORD", flt_X_Coord, hslFloat);
               SortFile.AddField("Y_COORD", flt_X_Coord, hslFloat);
               SortFile.AddField("GROUP", int_Group, hslInteger);
               str_SQL = "SELECT INDEX, LAB_ID, X_COORD, Y_COORD, [GROUP] FROM SORT ORDER BY LAB_ID ASC, Y_COORD DESC, X_COORD ASC";
               SortFile.SetExtendedProperties("HDR=YES");
               SortFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
               while(SortFile.Eof() == 0)
               {
                    SortFile.ReadRecord();
                    //Util::Lookup(arr_GroupedCounts,int_Group,a);
                    //Trace("Group:  ", int_Group,"  Count:  ",arr_GroupedCounts.GetAt(int_Group-1),"  Tips needed:  ",int_TipsNeeded);
                    if(arr_GroupedCounts.GetAt(int_Group-1) >= int_TipsNeeded)
                    {
                         int_Group = StrConcat2(int_Group,"");
                         bln_UseOptimization = hslTrue;
                         break;
                    }
               }
               //int_Index = StrConcat2(int_Index,"");
               SortFile.Close();
               SortFile.RemoveFields();
            //Trace("Lab ID:  ",str_LabID,"  X Coord:  ",flt_X_Coord);
            //Trace("Group:  ",int_Group);
            //Trace("Use Optimization:  ",bln_UseOptimization);
            if(bln_UseOptimization == hslTrue)
            {
                 str_SQL = "SELECT INDEX, LAB_ID, POS_ID, X_COORD, Y_COORD, [GROUP] FROM SORT WHERE [GROUP] = " + int_Group + " ORDER BY X_COORD ASC, Y_COORD DESC";
                 SortFile.RemoveFields();
                 SortFile.AddField("INDEX", int_Index, hslInteger);
                 SortFile.AddField("LAB_ID", str_LabID, hslString, 255);
                 SortFile.AddField("X_COORD", flt_X_Coord, hslFloat);
                 SortFile.AddField("Y_COORD", flt_Y_Coord, hslFloat);
                 SortFile.AddField("GROUP",int_Group, hslInteger);
                 SortFile.SetExtendedProperties("HDR=YES");
                 SortFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
                 i = 0;
                 int_ChannelIndex = 1;
                 str_InValue = "(";
                 flt_PreviousY = 9999.9;
                 while(SortFile.Eof() == 0)
                 {
                      if(i > int_TipsNeeded) break;
                      SortFile.ReadRecord();
                      if(arr_ChannelPattern.GetAt(int_ChannelIndex-1)==1)
                      {
                           if(i==0) flt_PreviousY = flt_Y_Coord + flt_YRaster;
                           if(flt_Y_Coord <= flt_PreviousY - flt_YRaster)
                           {
                                i = i + 1;
                                if(i > 1) str_InValue = str_InValue + ", ";
                                str_InValue = StrConcat2(str_InValue , int_Index);
                                int_ChannelIndex = int_ChannelIndex + 1;
                           }
                      }
                      else
                      {
                           int_ChannelIndex = int_ChannelIndex + 1;
                      }
                 }
                 str_InValue = str_InValue + ")";
                 SortFile.Close();
                 SortFile.RemoveFields();
                 UpdateFile.RemoveFields();
                 str_SQL = "UPDATE SORT SET USED = 2 WHERE INDEX IN" + str_InValue;
              //Trace(str_SQL);
                 UpdateFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
                 UpdateFile.Close();
                 UpdateFile.RemoveFields();
            }
            else
            {
                 str_SQL = "SELECT INDEX, LAB_ID, POS_ID, X_COORD, Y_COORD FROM SORT ORDER BY X_COORD ASC, Y_COORD DESC";
                 SortFile.RemoveFields();
                 SortFile.AddField("INDEX", int_Index, hslInteger);
                 SortFile.AddField("LAB_ID", str_LabID, hslString, 255);
                 SortFile.AddField("X_COORD", flt_X_Coord, hslFloat);
                 SortFile.AddField("Y_COORD", flt_Y_Coord, hslFloat);
                 SortFile.SetExtendedProperties("HDR=YES");
                 SortFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
                    i = 0;
                 str_InValue = "(";
                 int_ChannelCount = 1;
                 int_UpdateCount = 0;
                 int_ChannelIndex = 1;
                 while(SortFile.Eof() == 0)
                 {
                      //loop(int_TotalChannels)
                      //{
                         //if(int_ChannelIndex > int_TotalChannels) break;
                         //if(arr_ChannelPattern.GetAt(int_ChannelIndex)==1)
                         //{
                            //break;
                         //}
                         //int_ChannelIndex = int_ChannelIndex + 1;
                      //}
                      if(int_ChannelIndex > int_TotalChannels) break;
                      SortFile.ReadRecord();
                      i = i + 1;
                      if(int_ChannelCount > int_TipsNeeded) break;
                //Trace(flt_Y_Coord,"  <= ",arr_YMax.GetAt(int_ChannelIndex-1));
                //Trace(flt_Y_Coord,"  >= ",arr_YMin.GetAt(int_ChannelIndex-1));
                      if(flt_Y_Coord <= arr_YMax.GetAt(int_ChannelIndex-1))
                      {
                           if(flt_Y_Coord >= arr_YMin.GetAt(int_ChannelIndex-1))
                           {
                                if(int_ChannelCount > 1) str_InValue = str_InValue + ", ";
                                str_InValue = StrConcat2(str_InValue , int_Index);
                                int_ChannelCount = int_ChannelCount + 1;
                                int_UpdateCount = int_UpdateCount + 1;
                                int_ChannelIndex = int_ChannelIndex + 1;
                           }
                      }
                 }
                 str_InValue = str_InValue + ")";
                 SortFile.Close();
                 SortFile.RemoveFields();
                 if(int_UpdateCount>0)
                 {
                      UpdateFile.RemoveFields();
                      str_SQL = "UPDATE SORT SET USED = 2 WHERE INDEX IN" + str_InValue;
                      UpdateFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
                      UpdateFile.Close();
                      UpdateFile.RemoveFields();
                 }
            }
          }
          SeqRemoveAll(io_seq_TipSequence);
          {
               variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition,int_FilledLocation,int_Position,flt_X_Coord,flt_Y_Coord,flt_Z_Coord,flt_NotUsed;
               variable int_PositionCount, int_Count, str_SQL, bln_Used;
               SortFile.RemoveFields();
               str_SQL = "SELECT USED, LAB_ID, POS_ID FROM SORT ORDER BY USED DESC, LAB_ID ASC, X_COORD ASC, Y_COORD DESC";
               SortFile.AddField("USED", bln_Used, hslInteger);
               SortFile.AddField("LAB_ID", str_LabID, hslString, 255);
               SortFile.AddField("POS_ID", str_PosID, hslString, 255);
               SortFile.SetExtendedProperties("HDR=YES");
               SortFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
               while(SortFile.Eof() == 0)
               {
                    SortFile.ReadRecord();
                    SeqAdd(io_seq_TipSequence, Translate(str_LabID), Translate(str_PosID));
               }
               SortFile.Close();
               SortFile.RemoveFields();
          }
          io_seq_TipSequence.SetCurrentPosition(1);
          bln_EnoughTipsLoaded = BOOLEON::TRUE;
          {
               variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition,int_FilledLocation,int_Position,flt_X_Coord,flt_Y_Coord,flt_Z_Coord,flt_NotUsed;
               variable int_PositionCount, int_Count, str_SQL;
               SortFile.RemoveFields();
               str_SQL = "SELECT COUNT(*) AS N FROM SORT WHERE USED = 2";
               SortFile.AddField("N", int_Count, hslInteger);
               SortFile.SetExtendedProperties("HDR=YES");
               SortFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
               SortFile.ReadRecord();
               SortFile.Close();
               SortFile.RemoveFields();
               if(int_Count < int_TipsNeeded) bln_EnoughTipsLoaded = hslFalse;
          }
          if (bln_EnoughTipsLoaded == BOOLEON::FALSE)
          {
            MECC::TraceComment(Translate("------------------  Insufficient tips found"));
            TipCapacityCheck(ML_STAR, io_seq_TipSequence, flt_TipCapacity);
            if (flt_TipCapacity == 0.0)
            {
              flt_TipCapacity = Translate("Unknown");
            }
            str_TipName = StrConcat4(flt_TipCapacity, Translate(" uL Tips"), Translate(""), Translate(""));
            str_TipMessage = StrConcat4(Translate("Please load more "), str_TipName, Translate(" on to the deck."), Translate(""));
            customDialog_8.InitCustomDialog("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");
            customDialog_8.SetCustomDialogProperty( "textBlock2.Text", str_TipMessage );
            customDialog_8.ShowCustomDialog();
            ResetInputSequence(ML_STAR, io_seq_TipSequence);
            TipCounter_Edit(ML_STAR, io_seq_TipSequence, i_str_TipCounter, 99999);
          }
          else
          {
            break;
          }
        }
        else
        {
          break;
        }
      }
    }
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
  }

  function Optimized5mLTipPickup( device & ML_STAR, sequence & io_seq_TipSequence, sequence i_seq_ControlSequence, variable i_str_TipCounter, variable & o_str_ChannelPattern ) void {
    private dialog customDialog_9;
    private variable flt_NotUsed;
    private variable flt_CurrentX;
    private variable flt_TipCapacity;
    private variable flt_CurrentY;
    private variable flt_YRaster;
    private variable int_TotalOptions;
    private variable bln_OptimizationNeeded;
    private variable _strFunctionName;
    private variable int_TotalPositionsRemaining;
    private variable str_LabID;
    private variable bool_FileExists;
    private variable str_TipMessage;
    private variable flt_PreviousY;
    private variable str_TempSortingFilePath;
    private variable flt_TargetX;
    private variable int_SeqIndex;
    private variable int_TotalChannels;
    private variable str_PosID;
    private variable int_TipsNeeded;
    private variable bln_EnoughTipsLoaded;
    private variable str_TipName;
    private sequence seq_RemainingSequence;
    private variable arr_GroupedXCoords[];
    private variable arr_GroupNumber[];
    private variable arr_YMin[];
    private variable arr_YMax[];
    private variable arr_GroupedCounts[];
    private variable arr_GroupedLabID[];
    private file SortFile;
    private file UpdateFile;
    private file WriteFile;
    private variable bln_Used;
    o_str_ChannelPattern = 0;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::TRUE, BOOLEON::TRUE);
    o_str_ChannelPattern = Translate("");
    Get5mLChannelCount(ML_STAR, int_TotalChannels);
    HELPERLIBRARY::GetChannelLimits(ML_STAR, 1, arr_YMax, arr_YMin, flt_YRaster);
    HELPERLIBRARY::RemoveTruncatedSequencePositions(ML_STAR, i_seq_ControlSequence);
    int_TotalPositionsRemaining = SeqGetTotal(i_seq_ControlSequence);
    int_TipsNeeded = int_TotalPositionsRemaining;
    if (int_TipsNeeded > int_TotalChannels)
    {
      int_TipsNeeded = int_TotalChannels;
    }
    if (int_TipsNeeded == 0)
    {
      TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
      return;
    }
    bln_Used = 0;
    {
      while (BOOLEON::TRUE == BOOLEON::TRUE)
      {
        TipCheck(ML_STAR, io_seq_TipSequence, i_str_TipCounter, int_TipsNeeded);
        SeqCopySequence(seq_RemainingSequence, io_seq_TipSequence);
        HELPERLIBRARY::RemoveTruncatedSequencePositions(ML_STAR, seq_RemainingSequence);
        if(0){
          _SortSequenceYPriority(ML_STAR, seq_RemainingSequence);
        }
        HELPERLIBRARY::GetTempSortingFilePath(str_TempSortingFilePath);
        bool_FileExists = HSLExtensions::File::Exists(str_TempSortingFilePath);
        if (bool_FileExists == 1)
        {
          HSLExtensions::File::Delete(str_TempSortingFilePath);
        }
        BuildChannelPattern(int_TipsNeeded, int_TotalChannels, o_str_ChannelPattern);
        bln_OptimizationNeeded = BOOLEON::FALSE;
        {
          for(int_SeqIndex = 0; int_SeqIndex < int_TipsNeeded;)
          {
            int_SeqIndex = int_SeqIndex + 1;
            str_LabID = SeqGetLabwareId(seq_RemainingSequence);
            str_PosID = SeqGetPositionId(seq_RemainingSequence);
            SeqIncrement(seq_RemainingSequence, 1);
            DevGetLabwarePositionEx(ML_STAR, str_LabID, str_PosID, flt_CurrentX, flt_CurrentY, flt_NotUsed, flt_NotUsed);
            if (int_SeqIndex == 1)
            {
              flt_TargetX = flt_CurrentX;
              flt_PreviousY = flt_CurrentY;
            }
            else
            {
              if (flt_CurrentX != flt_TargetX)
              {
                bln_OptimizationNeeded = BOOLEON::TRUE;
                break;
              }
              if (flt_CurrentY >= flt_PreviousY)
              {
                bln_OptimizationNeeded = BOOLEON::TRUE;
                break;
              }
              flt_PreviousY = flt_CurrentY;
            }
          }
        }
        seq_RemainingSequence.SetCurrentPosition(1);
        if (bln_OptimizationNeeded == BOOLEON::TRUE)
        {
          HELPERLIBRARY::SortSequence(ML_STAR, seq_RemainingSequence, BOOLEON::FALSE);
          {
               variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition,int_FilledLocation,int_Position,flt_X_Coord,flt_Y_Coord,flt_Z_Coord,flt_NotUsed;
               variable int_PositionCount, int_Group, int_ChannelIndex, flt_CurrentX;
               WriteFile.RemoveFields();
               WriteFile.AddField("INDEX", int_PositionCount, hslInteger);
               WriteFile.AddField("USED", bln_Used, hslInteger);
               WriteFile.AddField("LAB_ID", str_LabID, hslString, 255);
               WriteFile.AddField("POS_ID", str_PosID, hslString, 255);
               WriteFile.AddField("X_COORD", flt_X_Coord, hslFloat);
               WriteFile.AddField("Y_COORD", flt_Y_Coord, hslFloat);
               WriteFile.AddField("Z_COORD", flt_Z_Coord, hslFloat);
               WriteFile.AddField("GROUP",int_Group,hslInteger);
               int_TotalValues = seq_RemainingSequence.GetTotal();
               WriteFile.SetExtendedProperties("HDR=YES");
               WriteFile.Open(str_TempSortingFilePath + " " + "SORT", hslWrite);
               int_PositionCount = 1;
               int_Group = 0;
               flt_CurrentX = -100.0;
               for(i = 0; i < int_TotalValues;)
               {
                    i = i + 1;
                    int_ChannelIndex = int_ChannelIndex + 1;
                    seq_RemainingSequence.SetCurrentPosition(i);
                    str_LabID = seq_RemainingSequence.GetLabwareId();
                    str_PosID = seq_RemainingSequence.GetPositionId();
                    DevGetLabwarePositionEx(ML_STAR, str_LabID, str_PosID, flt_X_Coord, flt_Y_Coord, flt_Z_Coord, flt_NotUsed);
                    if(flt_CurrentX != flt_X_Coord)
                    {
                         flt_CurrentX = flt_X_Coord;
                         int_Group = int_Group + 1;
                         int_ChannelIndex = 1;
                    }
                    if(int_ChannelIndex > int_TotalChannels)
                    {
                         int_ChannelIndex = 1;
                         flt_CurrentX = flt_X_Coord;
                         int_Group = int_Group + 1;
                    }
                    WriteFile.WriteRecord();
                    int_PositionCount = int_PositionCount + 1;
               }
               WriteFile.Close();
               WriteFile.RemoveFields();
          }
          if(0){
            arr_GroupedLabID.SetSize(0);
            arr_GroupedXCoords.SetSize(0);
          }
          arr_GroupNumber.SetSize(0);
          arr_GroupedCounts.SetSize(0);
          {
               variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition,int_FilledLocation,int_Position,flt_X_Coord,flt_Y_Coord,flt_Z_Coord,flt_NotUsed;
               variable int_PositionCount, int_Count, str_SQL, int_Group;
            SortFile.RemoveFields();
                  //str_SQL = "SELECT [GROUP], Y_COORD, COUNT(*) AS N FROM (SELECT * FROM SORT ORDER BY Y_COORD DESC, X_COORD ASC) GROUP BY [GROUP], Y_COORD ORDER BY Y_COORD DESC";
                  str_SQL = "SELECT [GROUP], N FROM (SELECT [GROUP], COUNT(*) AS N FROM SORT GROUP BY [GROUP]) ORDER BY [GROUP] ASC";
                  //SortFile.AddField("LAB_ID", str_LabID, hslString, 255);
                  SortFile.AddField("GROUP", int_Group, hslFloat);
                  SortFile.AddField("N", int_Count, hslInteger);
                  int_TotalValues = seq_RemainingSequence.GetTotal();
                  SortFile.SetExtendedProperties("HDR=YES");
                  SortFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
                  str_LabID = "";
                  flt_Y_Coord = 0.0;
                  while(SortFile.Eof() == 0)
                  {
                       SortFile.ReadRecord();
                       arr_GroupNumber.AddAsLast(int_Group);
                       arr_GroupedCounts.AddAsLast(int_Count);
                  }
                  SortFile.Close();
                  SortFile.RemoveFields();
          }
          int_TotalOptions=arr_GroupedCounts.GetSize();
          if(0){
            Util2::Debug::TraceArray_2(Translate("Counts           Group"), arr_GroupedCounts, arr_GroupNumber);
            Util2::Debug::TraceArray_3(Translate("Counts     Lab          X"), arr_GroupedCounts, arr_GroupedLabID, arr_GroupedXCoords);
          }
          {
               variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition,int_FilledLocation,int_Position,flt_X_Coord,flt_Y_Coord,flt_Z_Coord,flt_NotUsed;
               variable int_PositionCount, int_Count, str_SQL, bln_UseOptimization, int_Index, str_InValue, flt_XCoord, int_Group, a, int_ChannelCount, int_UpdateCount;
               bln_UseOptimization = hslFalse;
               SortFile.RemoveFields();
               SortFile.AddField("INDEX", int_Index, hslInteger);
               SortFile.AddField("LAB_ID", str_LabID, hslString, 255);
               SortFile.AddField("X_COORD", flt_X_Coord, hslFloat);
               SortFile.AddField("Y_COORD", flt_X_Coord, hslFloat);
               SortFile.AddField("GROUP", int_Group, hslInteger);
               str_SQL = "SELECT INDEX, LAB_ID, X_COORD, Y_COORD, [GROUP] FROM SORT ORDER BY LAB_ID ASC, Y_COORD DESC, X_COORD ASC";
               SortFile.SetExtendedProperties("HDR=YES");
               SortFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
               while(SortFile.Eof() == 0)
               {
                    SortFile.ReadRecord();
                    //Util::Lookup(arr_GroupedCounts,int_Group,a);
                    //Trace("Group:  ", int_Group,"  Count:  ",arr_GroupedCounts.GetAt(int_Group-1),"  Tips needed:  ",int_TipsNeeded);
                    if(arr_GroupedCounts.GetAt(int_Group-1) >= int_TipsNeeded)
                    {
                         int_Group = StrConcat2(int_Group,"");
                         bln_UseOptimization = hslTrue;
                         break;
                    }
               }
               //int_Index = StrConcat2(int_Index,"");
               SortFile.Close();
               SortFile.RemoveFields();
            //Trace("Lab ID:  ",str_LabID,"  X Coord:  ",flt_XCoord);
            //Trace("Group:  ",int_Group);
            //Trace("Use Optimization:  ",bln_UseOptimization);
            if(bln_UseOptimization == hslTrue)
            {
                 str_SQL = "SELECT INDEX, LAB_ID, POS_ID, X_COORD, Y_COORD, [GROUP] FROM SORT WHERE [GROUP] = " + int_Group + " ORDER BY X_COORD ASC, Y_COORD DESC";
                 SortFile.RemoveFields();
                 SortFile.AddField("INDEX", int_Index, hslInteger);
                 SortFile.AddField("LAB_ID", str_LabID, hslString, 255);
                 SortFile.AddField("X_COORD", flt_X_Coord, hslFloat);
                 SortFile.AddField("Y_COORD", flt_X_Coord, hslFloat);
                 SortFile.AddField("GROUP",int_Group, hslInteger);
                 SortFile.SetExtendedProperties("HDR=YES");
                 SortFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
                 i = 0;
                 str_InValue = "(";
                 while(SortFile.Eof() == 0)
                 {
                      i = i + 1;
                      if(i > int_TipsNeeded) break;
                      SortFile.ReadRecord();
                      if(i > 1) str_InValue = str_InValue + ", ";
                      str_InValue = StrConcat2(str_InValue , int_Index);
                 }
                 str_InValue = str_InValue + ")";
                 SortFile.Close();
                 SortFile.RemoveFields();
                 UpdateFile.RemoveFields();
                 str_SQL = "UPDATE SORT SET USED = 2 WHERE INDEX IN" + str_InValue;
              //Trace(str_SQL);
                 UpdateFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
                 UpdateFile.Close();
                 UpdateFile.RemoveFields();
            }
            else
            {
                 str_SQL = "SELECT INDEX, LAB_ID, POS_ID, X_COORD, Y_COORD FROM SORT ORDER BY X_COORD ASC, Y_COORD DESC";
                 SortFile.RemoveFields();
                 SortFile.AddField("INDEX", int_Index, hslInteger);
                 SortFile.AddField("LAB_ID", str_LabID, hslString, 255);
                 SortFile.AddField("X_COORD", flt_X_Coord, hslFloat);
                 SortFile.AddField("Y_COORD", flt_Y_Coord, hslFloat);
                 SortFile.SetExtendedProperties("HDR=YES");
                 SortFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
                    i = 0;
                 str_InValue = "(";
                 int_ChannelCount = 1;
                 int_UpdateCount = 0;
                 while(SortFile.Eof() == 0)
                 {
                      SortFile.ReadRecord();
                      i = i + 1;
                      if(int_ChannelCount > int_TipsNeeded) break;
                      if(flt_Y_Coord <= arr_YMax.GetAt(int_ChannelCount-1))
                      {
                           if(flt_Y_Coord >= arr_YMin.GetAt(int_ChannelCount-1))
                           {
                                if(int_ChannelCount > 1) str_InValue = str_InValue + ", ";
                                str_InValue = StrConcat2(str_InValue , int_Index);
                                int_ChannelCount = int_ChannelCount + 1;
                                int_UpdateCount = int_UpdateCount + 1;
                           }
                      }
                 }
                 str_InValue = str_InValue + ")";
                 SortFile.Close();
                 SortFile.RemoveFields();
                 if(int_UpdateCount>0)
                 {
                      UpdateFile.RemoveFields();
                      str_SQL = "UPDATE SORT SET USED = 2 WHERE INDEX IN" + str_InValue;
                      UpdateFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
                      UpdateFile.Close();
                      UpdateFile.RemoveFields();
                 }
            }
          }
          SeqRemoveAll(io_seq_TipSequence);
          {
               variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition,int_FilledLocation,int_Position,flt_X_Coord,flt_Y_Coord,flt_Z_Coord,flt_NotUsed;
               variable int_PositionCount, int_Count, str_SQL;
               SortFile.RemoveFields();
               str_SQL = "SELECT USED, LAB_ID, POS_ID FROM SORT ORDER BY USED DESC, LAB_ID ASC, X_COORD ASC, Y_COORD DESC";
               SortFile.AddField("USED", bln_Used, hslInteger);
               SortFile.AddField("LAB_ID", str_LabID, hslString, 255);
               SortFile.AddField("POS_ID", str_PosID, hslString, 255);
               SortFile.SetExtendedProperties("HDR=YES");
               SortFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
               while(SortFile.Eof() == 0)
               {
                    SortFile.ReadRecord();
                    SeqAdd(io_seq_TipSequence, Translate(str_LabID), Translate(str_PosID));
               }
               SortFile.Close();
               SortFile.RemoveFields();
          }
          io_seq_TipSequence.SetCurrentPosition(1);
          bln_EnoughTipsLoaded = BOOLEON::TRUE;
          {
               variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition,int_FilledLocation,int_Position,flt_X_Coord,flt_Y_Coord,flt_Z_Coord,flt_NotUsed;
               variable int_PositionCount, int_Count, str_SQL;
               SortFile.RemoveFields();
               str_SQL = "SELECT COUNT(*) AS N FROM SORT WHERE USED = 2";
               SortFile.AddField("N", int_Count, hslInteger);
               SortFile.SetExtendedProperties("HDR=YES");
               SortFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
               SortFile.ReadRecord();
               SortFile.Close();
               SortFile.RemoveFields();
               if(int_Count < int_TipsNeeded) bln_EnoughTipsLoaded = hslFalse;
          }
          if (bln_EnoughTipsLoaded == BOOLEON::FALSE)
          {
            MECC::TraceComment(Translate("------------------  Insufficient tips found"));
            TipCapacityCheck(ML_STAR, io_seq_TipSequence, flt_TipCapacity);
            if (flt_TipCapacity == 0.0)
            {
              flt_TipCapacity = Translate("Unknown");
            }
            str_TipName = StrConcat4(flt_TipCapacity, Translate(" uL Tips"), Translate(""), Translate(""));
            str_TipMessage = StrConcat4(Translate("Please load more "), str_TipName, Translate(" on to the deck."), Translate(""));
            customDialog_9.InitCustomDialog("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");
            customDialog_9.SetCustomDialogProperty( "textBlock2.Text", str_TipMessage );
            customDialog_9.ShowCustomDialog();
            ResetInputSequence(ML_STAR, io_seq_TipSequence);
            TipCounter_Edit(ML_STAR, io_seq_TipSequence, i_str_TipCounter, 99999);
          }
          else
          {
            break;
          }
        }
        else
        {
          break;
        }
      }
    }
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
  }

  function DefragTipRacks1mL( device & ML_STAR, sequence & io_seq_Tips ) void {
    private variable _strFunctionName;
    private sequence seq_TipsEmpty;
    private sequence seq_TipsRemaining;
    private variable arr_LabIDs[];
    private variable int_RemainingLabIDs;
    private variable int_Index;
    private variable str_LabID;
    private sequence seq_Temp;
    private variable int_NumInSeq;
    private variable i;
    private variable int_Position;
    private variable str_PosID;
    private file WriteFile;
    private variable bool_FileExists;
    private variable str_TempSortingFilePath;
    private variable arr_PartialLabID[];
    private variable arr_PartialCount[];
    private file SortFile;
    private variable flt_YRaster;
    private variable int_TotalChannels;
    private variable arr_YMin[];
    private variable arr_YMax[];
    private variable int_TotalPartial;
    private sequence seq_TipsPickUp;
    private variable int_ChannelIndex;
    private variable int_LabIndex;
    private variable flt_YMax;
    private variable flt_YMin;
    private variable int_ChannelsSet;
    private variable arr_ChannelPattern[];
    private variable str_CurrentLabID;
    private variable bln_ValueFound;
    private variable arr_PickUpIndex[];
    private variable int_TotalSet;
    private variable int_ChannelEnabled;
    private sequence seq_TipsPutDown;
    private variable str_ChannelPattern;
    private variable int_TotalUpdates;
    private variable arr_PutDownIndex[];
    private variable arr_UsedIndex[];
    private variable arr_PickUpLabware[];
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::TRUE, BOOLEON::TRUE);
    Get1mLChannelCount(ML_STAR, int_TotalChannels);
    HELPERLIBRARY::GetChannelLimits(ML_STAR, 0, arr_YMax, arr_YMin, flt_YRaster);
    SeqRemoveAll(seq_TipsRemaining);
    SeqCopySequence(seq_TipsRemaining, io_seq_Tips);
    HELPERLIBRARY::RemoveTruncatedSequencePositions(ML_STAR, seq_TipsRemaining);
    HELPERLIBRARY::GetTempSortingFilePath(str_TempSortingFilePath);
    StrReplace(str_TempSortingFilePath, Translate("TEMP_SORT_FILE"), Translate("TEMP_DEFRAG_FILE"));
    Trace(str_TempSortingFilePath);
    bool_FileExists = HSLExtensions::File::Exists(str_TempSortingFilePath);
    if (bool_FileExists == 1)
    {
      HSLExtensions::File::Delete(str_TempSortingFilePath);
    }
    SeqGetLabwareIds(seq_TipsRemaining, arr_LabIDs);
    int_RemainingLabIDs=arr_LabIDs.GetSize();
    {
      for(int_Index = 0; int_Index < int_RemainingLabIDs;)
      {
        int_Index = int_Index + 1;
        str_LabID=arr_LabIDs.GetAt(int_Index-1);
        HELPERLIBRARY::GetDefaultSequence(ML_STAR, str_LabID, 1, seq_Temp);
        int_NumInSeq = SeqGetTotal(seq_Temp);
        {
          for(i = 0; i < int_NumInSeq;)
          {
            i = i + 1;
            seq_Temp.SetCurrentPosition(i);
            str_LabID = SeqGetLabwareId(seq_Temp);
            str_PosID = SeqGetPositionId(seq_Temp);
            int_Position = SeqLookupPosition(seq_TipsRemaining, str_LabID, str_PosID, 1, 1);
            if (int_Position == 0)
            {
              SeqAdd(seq_TipsEmpty, str_LabID, str_PosID);
            }
          }
        }
      }
    }
    seq_TipsEmpty.SetCurrentPosition(1);
    {
         variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition,int_FilledLocation,int_Position,flt_X_Coord,flt_Y_Coord,flt_Z_Coord,flt_NotUsed;
         variable int_PositionCount, int_Group, int_ChannelIndex, flt_CurrentX, bln_Used;
         WriteFile.RemoveFields();
         WriteFile.AddField("INDEX", int_PositionCount, hslInteger);
         WriteFile.AddField("USED", bln_Used, hslInteger);
         WriteFile.AddField("LAB_ID", str_LabID, hslString, 255);
         WriteFile.AddField("POS_ID", str_PosID, hslString, 255);
         WriteFile.AddField("X_COORD", flt_X_Coord, hslFloat);
         WriteFile.AddField("Y_COORD", flt_Y_Coord, hslFloat);
         WriteFile.AddField("Z_COORD", flt_Z_Coord, hslFloat);
         WriteFile.AddField("GROUP",int_Group,hslInteger);
         int_TotalValues = seq_TipsRemaining.GetTotal();
         WriteFile.SetExtendedProperties("HDR=YES");
         WriteFile.Open(str_TempSortingFilePath + " " + "SORT", hslWrite);
         int_PositionCount = 1;
         int_Group = 0;
         bln_Used = 1;
         for(i = 0; i < int_TotalValues;)
         {
              i = i + 1;
              int_ChannelIndex = int_ChannelIndex + 1;
              seq_TipsRemaining.SetCurrentPosition(i);
              str_LabID = seq_TipsRemaining.GetLabwareId();
              str_PosID = seq_TipsRemaining.GetPositionId();
              DevGetLabwarePositionEx(ML_STAR, str_LabID, str_PosID, flt_X_Coord, flt_Y_Coord, flt_Z_Coord, flt_NotUsed);
              WriteFile.WriteRecord();
              int_PositionCount = int_PositionCount + 1;
         }
         int_TotalValues = seq_TipsEmpty.GetTotal();
         bln_Used = 0;
         for(i = 0; i < int_TotalValues;)
         {
              i = i + 1;
              int_ChannelIndex = int_ChannelIndex + 1;
              seq_TipsEmpty.SetCurrentPosition(i);
              str_LabID = seq_TipsEmpty.GetLabwareId();
              str_PosID = seq_TipsEmpty.GetPositionId();
              DevGetLabwarePositionEx(ML_STAR, str_LabID, str_PosID, flt_X_Coord, flt_Y_Coord, flt_Z_Coord, flt_NotUsed);
              WriteFile.WriteRecord();
              int_PositionCount = int_PositionCount + 1;
         }
         WriteFile.Close();
         WriteFile.RemoveFields();
    }
    {
      while (BOOLEON::TRUE == BOOLEON::TRUE)
      {
        arr_ChannelPattern.SetSize(0);
        arr_PartialLabID.SetSize(0);
        arr_PartialCount.SetSize(0);
        SeqRemoveAll(seq_TipsEmpty);
        SeqRemoveAll(seq_TipsPickUp);
        SeqRemoveAll(seq_TipsPutDown);
        {
             variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition,int_FilledLocation,int_Position,flt_X_Coord,flt_Y_Coord,flt_Z_Coord,flt_NotUsed;
             variable int_PositionCount, int_Count, str_SQL, bln_Used;
             SortFile.RemoveFields();
             str_SQL = "SELECT LAB_ID, COUNT(*) AS N FROM SORT WHERE USED = 1 GROUP BY LAB_ID ORDER BY COUNT(*) ASC";
             SortFile.AddField("N", int_Count, hslInteger);
             SortFile.AddField("LAB_ID", str_LabID, hslString, 255);
             SortFile.SetExtendedProperties("HDR=YES");
             SortFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
             while(SortFile.Eof() == 0)
             {
                  SortFile.ReadRecord();
                  if(int_Count < 96)
                  {
                       arr_PartialLabID.AddAsLast(str_LabID);
                       arr_PartialCount.AddAsLast(int_Count);
                  }
             }
             SortFile.Close();
             SortFile.RemoveFields();
        }
        Util2::Debug::TraceArray_2(Translate("Partial Racks           Count"), arr_PartialLabID, arr_PartialCount);
        int_TotalPartial=arr_PartialCount.GetSize();
        int_TotalPartial = int_TotalPartial - 1;
        if (int_TotalPartial <= 0)
        {
          break;
        }
        int_ChannelsSet = 0;
        arr_PickUpIndex.SetSize(0);
        arr_PutDownIndex.SetSize(0);
        arr_UsedIndex.SetSize(0);
        arr_PickUpLabware.SetSize(0);
        {
          for(int_ChannelIndex = 0; int_ChannelIndex < int_TotalChannels;)
          {
            int_ChannelIndex = int_ChannelIndex + 1;
            bln_ValueFound = BOOLEON::FALSE;
            flt_YMax=arr_YMax.GetAt(int_ChannelIndex-1);
            flt_YMin=arr_YMin.GetAt(int_ChannelIndex-1);
            if(0){
              flt_YMax = StrConcat2(flt_YMax, Translate(""));
              flt_YMin = StrConcat2(flt_YMin, Translate(""));
            }
            {
              for(int_LabIndex = 0; int_LabIndex < int_TotalPartial;)
              {
                int_LabIndex = int_LabIndex + 1;
                str_CurrentLabID=arr_PartialLabID.GetAt(int_LabIndex-1);
                {
                     variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition,int_FilledLocation,int_Position,flt_X_Coord,flt_Y_Coord,flt_Z_Coord,flt_NotUsed;
                     variable int_PositionCount, int_Count, str_SQL, bln_Used, int_Index, a;
                     SortFile.RemoveFields();
                     SortFile.AddField("N", int_Count, hslInteger);
                     flt_YMax = StrConcat2(flt_YMax, "");
                     flt_YMin = StrConcat2(flt_YMin, "");
                     str_SQL = "SELECT COUNT(*) AS N FROM SORT WHERE LAB_ID = '" + str_CurrentLabID + "' AND USED = 1 AND Y_COORD <= " + flt_YMax + " AND Y_COORD >= "+ flt_YMin;
                     SortFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
                     SortFile.ReadRecord();
                     SortFile.Close();
                     SortFile.RemoveFields();
                     if(int_Count > 0)
                     {
                          SortFile.AddField("INDEX", int_Index, hslInteger);
                          SortFile.AddField("LAB_ID", str_LabID, hslString, 255);
                          SortFile.AddField("POS_ID", str_PosID, hslString, 255);
                          str_SQL = "SELECT INDEX, LAB_ID, POS_ID FROM SORT WHERE LAB_ID = '" + str_CurrentLabID + "' AND USED = 1 AND Y_COORD <= " + flt_YMax + " AND Y_COORD >= "+ flt_YMin + " ORDER BY X_COORD ASC, Y_COORD DESC";
                    //Trace(str_SQL);
                          SortFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
                          while(SortFile.Eof() == 0)
                          {
                               SortFile.ReadRecord();
                               if(!Util::Lookup(arr_UsedIndex,int_Index,a))
                               {
                                    SeqAdd(seq_TipsPickUp, Translate(str_LabID), Translate(str_PosID));
                                    int_ChannelsSet = int_ChannelsSet + 1;
                                    arr_ChannelPattern.AddAsLast(1);
                                    arr_PickUpIndex.AddAsLast(int_Index);
                                    arr_UsedIndex.AddAsLast(int_Index);
                                    arr_PickUpLabware.AddAsLast(str_LabID);
                                    bln_ValueFound = hslTrue;
                                    break;
                               }
                          }
                          SortFile.Close();
                          SortFile.RemoveFields();
                     }
                }
                if (int_ChannelsSet == int_TotalChannels)
                {
                  break;
                }
                if (bln_ValueFound == BOOLEON::TRUE)
                {
                  break;
                }
              }
            }
            if (bln_ValueFound == BOOLEON::FALSE)
            {
              arr_ChannelPattern.AddAsLast(0);
            }
            if (int_ChannelsSet == int_TotalChannels)
            {
              break;
            }
          }
        }
        seq_TipsPickUp.SetCurrentPosition(1);
        int_TotalSet=arr_ChannelPattern.GetSize();
        {
          for(int_ChannelIndex = 0; int_ChannelIndex < int_TotalChannels;)
          {
            int_ChannelIndex = int_ChannelIndex + 1;
            if (int_ChannelIndex > int_TotalSet)
            {
              arr_ChannelPattern.AddAsLast(0);
            }
          }
        }
        arr_PartialLabID.SetSize(0);
        arr_PartialCount.SetSize(0);
        {
             variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition,int_FilledLocation,int_Position,flt_X_Coord,flt_Y_Coord,flt_Z_Coord,flt_NotUsed;
             variable int_PositionCount, int_Count, str_SQL, bln_Used;
             SortFile.RemoveFields();
             str_SQL = "SELECT LAB_ID, COUNT(*) AS N FROM SORT WHERE USED = 0 GROUP BY LAB_ID ORDER BY COUNT(*) ASC";
             SortFile.AddField("N", int_Count, hslInteger);
             SortFile.AddField("LAB_ID", str_LabID, hslString, 255);
             SortFile.SetExtendedProperties("HDR=YES");
             SortFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
             while(SortFile.Eof() == 0)
             {
                  SortFile.ReadRecord();
                  if(int_Count < 96)
                  {
                       arr_PartialLabID.AddAsLast(str_LabID);
                       arr_PartialCount.AddAsLast(int_Count);
                  }
             }
             SortFile.Close();
             SortFile.RemoveFields();
        }
        Util2::Debug::TraceArray_2(Translate("Partial Racks           Count"), arr_PartialLabID, arr_PartialCount);
        int_TotalPartial=arr_PartialCount.GetSize();
        int_TotalPartial = int_TotalPartial - 1;
        if (int_TotalPartial <= 0)
        {
          break;
        }
        int_ChannelsSet = 0;
        {
          for(int_ChannelIndex = 0; int_ChannelIndex < int_TotalChannels;)
          {
            int_ChannelIndex = int_ChannelIndex + 1;
            int_ChannelEnabled=arr_ChannelPattern.GetAt(int_ChannelIndex-1);
            if (int_ChannelEnabled == 1)
            {
              bln_ValueFound = BOOLEON::FALSE;
              flt_YMax=arr_YMax.GetAt(int_ChannelIndex-1);
              flt_YMin=arr_YMin.GetAt(int_ChannelIndex-1);
              {
                for(int_LabIndex = 0; int_LabIndex < int_TotalPartial;)
                {
                  int_LabIndex = int_LabIndex + 1;
                  str_CurrentLabID=arr_PartialLabID.GetAt(int_LabIndex-1);
                  {
                       variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition,int_FilledLocation,int_Position,flt_X_Coord,flt_Y_Coord,flt_Z_Coord,flt_NotUsed;
                       variable int_PositionCount, int_Count, str_SQL, bln_Used, int_Index, a;
                       SortFile.RemoveFields();
                       SortFile.AddField("N", int_Count, hslInteger);
                       flt_YMax = StrConcat2(flt_YMax, "");
                       flt_YMin = StrConcat2(flt_YMin, "");
                       str_SQL = "SELECT COUNT(*) AS N FROM SORT WHERE LAB_ID = '" + str_CurrentLabID + "' AND USED = 0 AND Y_COORD <= " + flt_YMax + " AND Y_COORD >= "+ flt_YMin;
                       SortFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
                       SortFile.ReadRecord();
                       SortFile.Close();
                       SortFile.RemoveFields();
                    //Trace("Count:  ",int_Count);
                       if(int_Count > 0)
                       {
                            SortFile.AddField("INDEX", int_Index, hslInteger);
                            SortFile.AddField("LAB_ID", str_LabID, hslString, 255);
                            SortFile.AddField("POS_ID", str_PosID, hslString, 255);
                            str_SQL = "SELECT INDEX, LAB_ID, POS_ID FROM SORT WHERE LAB_ID = '" + str_CurrentLabID + "' AND USED = 0 AND Y_COORD <= " + flt_YMax + " AND Y_COORD >= "+ flt_YMin + " ORDER BY X_COORD DESC, Y_COORD DESC";
                      //Trace(str_SQL);
                            SortFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
                            while(SortFile.Eof() == 0)
                            {
                                 SortFile.ReadRecord();
                                 if(!Util::Lookup(arr_UsedIndex,int_Index,a))
                                 {
                                       SeqAdd(seq_TipsPutDown, Translate(str_LabID), Translate(str_PosID));
                                       int_ChannelsSet = int_ChannelsSet + 1;
                                       arr_PutDownIndex.AddAsLast(int_Index);
                                       arr_UsedIndex.AddAsLast(int_Index);
                                       bln_ValueFound = hslTrue;
                        //Trace("Add position:  ",str_PosID);
                                       break;
                        //Trace("Lab ID:  ",str_LabID,"  Channel pickup Lab:  ",arr_PickUpLabware.GetAt(int_ChannelsSet));
                                    //if(arr_PickUpLabware.GetAt(int_ChannelsSet)!= str_CurrentLabID)
                                    //{
                                       //SeqAdd(seq_TipsPutDown, Translate(str_LabID), Translate(str_PosID));
                                       //int_ChannelsSet = int_ChannelsSet + 1;
                                       //arr_PutDownIndex.AddAsLast(int_Index);
                                       //arr_UsedIndex.AddAsLast(int_Index);
                                       //bln_ValueFound = hslTrue;
                                       //break;
                                    //}
                                    //else
                                    //{
                                       //arr_ChannelPattern.SetAt(int_ChannelIndex-1,0);
                                       //break;
                                    //}
                                 }
                            }
                            SortFile.Close();
                            SortFile.RemoveFields();
                       }
                  }
                  if (bln_ValueFound == BOOLEON::FALSE)
                  {
                    arr_ChannelPattern.SetAt(int_ChannelIndex-1, 0);
                  }
                  if (int_ChannelsSet == int_TotalChannels)
                  {
                    break;
                  }
                  if (bln_ValueFound == BOOLEON::TRUE)
                  {
                    break;
                  }
                }
              }
            }
          }
        }
        seq_TipsPutDown.SetCurrentPosition(1);
        if(0){
          Util2::Debug::TraceSequence(seq_TipsPickUp);
          Util2::Debug::TraceSequence(seq_TipsPutDown);
          Util2::Debug::TraceArray(Translate("Channel Active"), arr_ChannelPattern);
          Util2::Debug::TraceArray(Translate("Pick up Index"), arr_PickUpIndex);
        }
        str_ChannelPattern = Translate("");
        {
          for(int_ChannelIndex = 0; int_ChannelIndex < int_TotalChannels;)
          {
            int_ChannelIndex = int_ChannelIndex + 1;
            str_ChannelPattern = StrConcat4(str_ChannelPattern, arr_ChannelPattern.ElementAt( int_ChannelIndex -1), Translate(""), Translate(""));
          }
        }
        TRACE::TRACE02(Translate("Channel Pattern:  "), str_ChannelPattern);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        int_TotalUpdates=arr_PickUpIndex.GetSize();
        {
             variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition,int_FilledLocation,int_Position,flt_X_Coord,flt_Y_Coord,flt_Z_Coord,flt_NotUsed;
             variable int_PositionCount, int_Count, str_SQL, bln_UseOptimization, int_Index, str_InValue, flt_XCoord, int_Group, a, int_ChannelCount, int_UpdateCount;
             file UpdateFile;
             UpdateFile.RemoveFields();
             str_InValue = "(";
             int_UpdateCount = 0;
             for(i=0;i<int_TotalChannels;i++)
             {
                  if(arr_ChannelPattern.GetAt(i) == 1)
                  {
                       int_Index = arr_PickUpIndex.GetAt(int_UpdateCount);
                       if(int_UpdateCount > 0) str_InValue = str_InValue + ", ";
                       str_InValue = StrConcat2(str_InValue , int_Index);
                       int_ChannelCount = int_ChannelCount + 1;
                       int_UpdateCount = int_UpdateCount + 1;
                       if(int_UpdateCount>int_TotalUpdates) break;
                  }
             }
             str_InValue = str_InValue + ")";
             if(int_UpdateCount > 0)
             {
                  str_SQL = "UPDATE SORT SET USED = -1 WHERE INDEX IN" + str_InValue;
            //Trace(str_SQL);
                  UpdateFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
                  UpdateFile.Close();
                  UpdateFile.RemoveFields();
             }
        }
        int_TotalUpdates=arr_PutDownIndex.GetSize();
        {
             variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition,int_FilledLocation,int_Position,flt_X_Coord,flt_Y_Coord,flt_Z_Coord,flt_NotUsed;
             variable int_PositionCount, int_Count, str_SQL, bln_UseOptimization, int_Index, str_InValue, flt_XCoord, int_Group, a, int_ChannelCount, int_UpdateCount;
             file UpdateFile;
             UpdateFile.RemoveFields();
             str_InValue = "(";
             int_UpdateCount = 0;
             for(i=0;i<int_TotalChannels;i++)
             {
                  if(arr_ChannelPattern.GetAt(i) == 1)
                  {
                       int_Index = arr_PutDownIndex.GetAt(int_UpdateCount);
                       if(int_UpdateCount > 0) str_InValue = str_InValue + ", ";
                       str_InValue = StrConcat2(str_InValue , int_Index);
                       int_ChannelCount = int_ChannelCount + 1;
                       int_UpdateCount = int_UpdateCount + 1;
                       if(int_UpdateCount>int_TotalUpdates) break;
                  }
             }
             str_InValue = str_InValue + ")";
             if(int_UpdateCount > 0)
             {
                  str_SQL = "UPDATE SORT SET USED = 2 WHERE INDEX IN" + str_InValue;
            //Trace(str_SQL);
                  UpdateFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
                  UpdateFile.Close();
                  UpdateFile.RemoveFields();
             }
        }
      }
    }
    SeqRemoveAll(io_seq_Tips);
    SeqRemoveAll(seq_TipsEmpty);
    {
         variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition,int_FilledLocation,int_Position,flt_X_Coord,flt_Y_Coord,flt_Z_Coord,flt_NotUsed;
         variable int_PositionCount, int_Group, int_ChannelIndex, flt_CurrentX, bln_Used;
         file ReadFile;
         ReadFile.RemoveFields();
         ReadFile.AddField("INDEX", int_PositionCount, hslInteger);
         ReadFile.AddField("USED", bln_Used, hslInteger);
         ReadFile.AddField("LAB_ID", str_LabID, hslString, 255);
         ReadFile.AddField("POS_ID", str_PosID, hslString, 255);
         ReadFile.AddField("X_COORD", flt_X_Coord, hslFloat);
         ReadFile.AddField("Y_COORD", flt_Y_Coord, hslFloat);
         ReadFile.AddField("Z_COORD", flt_Z_Coord, hslFloat);
         ReadFile.AddField("GROUP",int_Group,hslInteger);
         int_TotalValues = seq_TipsRemaining.GetTotal();
         ReadFile.SetExtendedProperties("HDR=YES");
         ReadFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead);
         int_PositionCount = 1;
         int_Group = 0;
         bln_Used = 1;
         while(ReadFile.Eof() == 0)
         {
              ReadFile.ReadRecord();
              if(bln_Used > 0)
              {
                   SeqAdd(io_seq_Tips, Translate(str_LabID), Translate(str_PosID));
              }
              else
              {
                   SeqAdd(seq_TipsEmpty, Translate(str_LabID), Translate(str_PosID));
              }
         }
         ReadFile.Close();
         ReadFile.RemoveFields();
    }
    io_seq_Tips.SetCurrentPosition(1);
    DeckVisualize::UpdateUsedPositions(ML_STAR, io_seq_Tips, 5, Translate("With Tips"));
    DeckVisualize::UpdateUsedPositions(ML_STAR, seq_TipsEmpty, 4, Translate("No Tips"));
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
  }

  function DefragTipRacks5mL( device & ML_STAR, sequence & io_seq_Tips ) void {
    private variable int_ChannelEnabled;
    private variable str_ChannelPattern;
    private variable i;
    private variable flt_YMin;
    private variable flt_YRaster;
    private variable flt_YMax;
    private variable int_NumInSeq;
    private variable int_RemainingLabIDs;
    private variable _strFunctionName;
    private variable str_LabID;
    private variable int_TotalPartial;
    private variable int_Position;
    private variable bool_FileExists;
    private variable int_TotalSet;
    private variable str_TempSortingFilePath;
    private variable int_ChannelsSet;
    private variable bln_ValueFound;
    private variable int_TotalChannels;
    private variable int_ChannelIndex;
    private variable str_PosID;
    private variable int_TotalUpdates;
    private variable int_LabIndex;
    private variable str_CurrentLabID;
    private variable int_Index;
    private sequence seq_TipsEmpty;
    private sequence seq_Temp;
    private sequence seq_TipsRemaining;
    private sequence seq_TipsPickUp;
    private sequence seq_TipsPutDown;
    private variable arr_PutDownIndex[];
    private variable arr_PartialCount[];
    private variable arr_LabIDs[];
    private variable arr_UsedIndex[];
    private variable arr_PickUpIndex[];
    private variable arr_ChannelPattern[];
    private variable arr_PickUpLabware[];
    private variable arr_YMin[];
    private variable arr_YMax[];
    private variable arr_PartialLabID[];
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::TRUE, BOOLEON::TRUE);
    Get5mLChannelCount(ML_STAR, int_TotalChannels);
    HELPERLIBRARY::GetChannelLimits(ML_STAR, 1, arr_YMax, arr_YMin, flt_YRaster);
    SeqRemoveAll(seq_TipsRemaining);
    SeqCopySequence(seq_TipsRemaining, io_seq_Tips);
    HELPERLIBRARY::RemoveTruncatedSequencePositions(ML_STAR, seq_TipsRemaining);
    HELPERLIBRARY::GetTempSortingFilePath(str_TempSortingFilePath);
    StrReplace(str_TempSortingFilePath, Translate("TEMP_SORT_FILE"), Translate("TEMP_DEFRAG_FILE"));
    Trace(str_TempSortingFilePath);
    bool_FileExists = HSLExtensions::File::Exists(str_TempSortingFilePath);
    if (bool_FileExists == 1)
    {
      HSLExtensions::File::Delete(str_TempSortingFilePath);
    }
    SeqGetLabwareIds(seq_TipsRemaining, arr_LabIDs);
    int_RemainingLabIDs=arr_LabIDs.GetSize();
    {
      for(int_Index = 0; int_Index < int_RemainingLabIDs;)
      {
        int_Index = int_Index + 1;
        str_LabID=arr_LabIDs.GetAt(int_Index-1);
        HELPERLIBRARY::GetDefaultSequence(ML_STAR, str_LabID, 1, seq_Temp);
        int_NumInSeq = SeqGetTotal(seq_Temp);
        {
          for(i = 0; i < int_NumInSeq;)
          {
            i = i + 1;
            seq_Temp.SetCurrentPosition(i);
            str_LabID = SeqGetLabwareId(seq_Temp);
            str_PosID = SeqGetPositionId(seq_Temp);
            int_Position = SeqLookupPosition(seq_TipsRemaining, str_LabID, str_PosID, 1, 1);
            if (int_Position == 0)
            {
              SeqAdd(seq_TipsEmpty, str_LabID, str_PosID);
            }
          }
        }
      }
    }
    seq_TipsEmpty.SetCurrentPosition(1);
    {
         variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition,int_FilledLocation,int_Position,flt_X_Coord,flt_Y_Coord,flt_Z_Coord,flt_NotUsed;
         variable int_PositionCount, int_Group, int_ChannelIndex, flt_CurrentX, bln_Used;
         file WriteFile;
         WriteFile.RemoveFields();
         WriteFile.AddField("INDEX", int_PositionCount, hslInteger);
         WriteFile.AddField("USED", bln_Used, hslInteger);
         WriteFile.AddField("LAB_ID", str_LabID, hslString, 255);
         WriteFile.AddField("POS_ID", str_PosID, hslString, 255);
         WriteFile.AddField("X_COORD", flt_X_Coord, hslFloat);
         WriteFile.AddField("Y_COORD", flt_Y_Coord, hslFloat);
         WriteFile.AddField("Z_COORD", flt_Z_Coord, hslFloat);
         WriteFile.AddField("GROUP",int_Group,hslInteger);
         int_TotalValues = seq_TipsRemaining.GetTotal();
         WriteFile.SetExtendedProperties("HDR=YES");
         WriteFile.Open(str_TempSortingFilePath + " " + "SORT", hslWrite);
         int_PositionCount = 1;
         int_Group = 0;
         bln_Used = 1;
         for(i = 0; i < int_TotalValues;)
         {
              i = i + 1;
              int_ChannelIndex = int_ChannelIndex + 1;
              seq_TipsRemaining.SetCurrentPosition(i);
              str_LabID = seq_TipsRemaining.GetLabwareId();
              str_PosID = seq_TipsRemaining.GetPositionId();
              DevGetLabwarePositionEx(ML_STAR, str_LabID, str_PosID, flt_X_Coord, flt_Y_Coord, flt_Z_Coord, flt_NotUsed);
              WriteFile.WriteRecord();
              int_PositionCount = int_PositionCount + 1;
         }
         int_TotalValues = seq_TipsEmpty.GetTotal();
         bln_Used = 0;
         for(i = 0; i < int_TotalValues;)
         {
              i = i + 1;
              int_ChannelIndex = int_ChannelIndex + 1;
              seq_TipsEmpty.SetCurrentPosition(i);
              str_LabID = seq_TipsEmpty.GetLabwareId();
              str_PosID = seq_TipsEmpty.GetPositionId();
              DevGetLabwarePositionEx(ML_STAR, str_LabID, str_PosID, flt_X_Coord, flt_Y_Coord, flt_Z_Coord, flt_NotUsed);
              WriteFile.WriteRecord();
              int_PositionCount = int_PositionCount + 1;
         }
         WriteFile.Close();
         WriteFile.RemoveFields();
    }
    {
      while (BOOLEON::TRUE == BOOLEON::TRUE)
      {
        arr_ChannelPattern.SetSize(0);
        arr_PartialLabID.SetSize(0);
        arr_PartialCount.SetSize(0);
        SeqRemoveAll(seq_TipsEmpty);
        SeqRemoveAll(seq_TipsPickUp);
        SeqRemoveAll(seq_TipsPutDown);
        {
             variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition,int_FilledLocation,int_Position,flt_X_Coord,flt_Y_Coord,flt_Z_Coord,flt_NotUsed;
             variable int_PositionCount, int_Count, str_SQL, bln_Used;
             file SortFile;
             SortFile.RemoveFields();
             str_SQL = "SELECT LAB_ID, COUNT(*) AS N FROM SORT WHERE USED = 1 GROUP BY LAB_ID ORDER BY COUNT(*) ASC";
             SortFile.AddField("N", int_Count, hslInteger);
             SortFile.AddField("LAB_ID", str_LabID, hslString, 255);
             SortFile.SetExtendedProperties("HDR=YES");
             SortFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
             while(SortFile.Eof() == 0)
             {
                  SortFile.ReadRecord();
                  if(int_Count < 96)
                  {
                       arr_PartialLabID.AddAsLast(str_LabID);
                       arr_PartialCount.AddAsLast(int_Count);
                  }
             }
             SortFile.Close();
             SortFile.RemoveFields();
        }
        Util2::Debug::TraceArray_2(Translate("Partial Racks           Count"), arr_PartialLabID, arr_PartialCount);
        int_TotalPartial=arr_PartialCount.GetSize();
        int_TotalPartial = int_TotalPartial - 1;
        if (int_TotalPartial <= 0)
        {
          break;
        }
        int_ChannelsSet = 0;
        arr_PickUpIndex.SetSize(0);
        arr_PutDownIndex.SetSize(0);
        arr_UsedIndex.SetSize(0);
        arr_PickUpLabware.SetSize(0);
        {
          for(int_ChannelIndex = 0; int_ChannelIndex < int_TotalChannels;)
          {
            int_ChannelIndex = int_ChannelIndex + 1;
            bln_ValueFound = BOOLEON::FALSE;
            flt_YMax=arr_YMax.GetAt(int_ChannelIndex-1);
            flt_YMin=arr_YMin.GetAt(int_ChannelIndex-1);
            if(0){
              flt_YMax = StrConcat2(flt_YMax, Translate(""));
              flt_YMin = StrConcat2(flt_YMin, Translate(""));
            }
            {
              for(int_LabIndex = 0; int_LabIndex < int_TotalPartial;)
              {
                int_LabIndex = int_LabIndex + 1;
                str_CurrentLabID=arr_PartialLabID.GetAt(int_LabIndex-1);
                {
                     variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition,int_FilledLocation,int_Position,flt_X_Coord,flt_Y_Coord,flt_Z_Coord,flt_NotUsed;
                     variable int_PositionCount, int_Count, str_SQL, bln_Used, int_Index, a;
                     file SortFile;
                     SortFile.RemoveFields();
                     SortFile.AddField("N", int_Count, hslInteger);
                     flt_YMax = StrConcat2(flt_YMax, "");
                     flt_YMin = StrConcat2(flt_YMin, "");
                     str_SQL = "SELECT COUNT(*) AS N FROM SORT WHERE LAB_ID = '" + str_CurrentLabID + "' AND USED = 1 AND Y_COORD <= " + flt_YMax + " AND Y_COORD >= "+ flt_YMin;
                     SortFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
                     SortFile.ReadRecord();
                     SortFile.Close();
                     SortFile.RemoveFields();
                     if(int_Count > 0)
                     {
                          SortFile.AddField("INDEX", int_Index, hslInteger);
                          SortFile.AddField("LAB_ID", str_LabID, hslString, 255);
                          SortFile.AddField("POS_ID", str_PosID, hslString, 255);
                          str_SQL = "SELECT INDEX, LAB_ID, POS_ID FROM SORT WHERE LAB_ID = '" + str_CurrentLabID + "' AND USED = 1 AND Y_COORD <= " + flt_YMax + " AND Y_COORD >= "+ flt_YMin + " ORDER BY X_COORD ASC, Y_COORD DESC";
                    //Trace(str_SQL);
                          SortFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
                          while(SortFile.Eof() == 0)
                          {
                               SortFile.ReadRecord();
                               if(!Util::Lookup(arr_UsedIndex,int_Index,a))
                               {
                                    SeqAdd(seq_TipsPickUp, Translate(str_LabID), Translate(str_PosID));
                                    int_ChannelsSet = int_ChannelsSet + 1;
                                    arr_ChannelPattern.AddAsLast(1);
                                    arr_PickUpIndex.AddAsLast(int_Index);
                                    arr_UsedIndex.AddAsLast(int_Index);
                                    arr_PickUpLabware.AddAsLast(str_LabID);
                                    bln_ValueFound = hslTrue;
                                    break;
                               }
                          }
                          SortFile.Close();
                          SortFile.RemoveFields();
                     }
                }
                if (int_ChannelsSet == int_TotalChannels)
                {
                  break;
                }
                if (bln_ValueFound == BOOLEON::TRUE)
                {
                  break;
                }
              }
            }
            if (bln_ValueFound == BOOLEON::FALSE)
            {
              arr_ChannelPattern.AddAsLast(0);
            }
            if (int_ChannelsSet == int_TotalChannels)
            {
              break;
            }
          }
        }
        seq_TipsPickUp.SetCurrentPosition(1);
        int_TotalSet=arr_ChannelPattern.GetSize();
        {
          for(int_ChannelIndex = 0; int_ChannelIndex < int_TotalChannels;)
          {
            int_ChannelIndex = int_ChannelIndex + 1;
            if (int_ChannelIndex > int_TotalSet)
            {
              arr_ChannelPattern.AddAsLast(0);
            }
          }
        }
        arr_PartialLabID.SetSize(0);
        arr_PartialCount.SetSize(0);
        {
             variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition,int_FilledLocation,int_Position,flt_X_Coord,flt_Y_Coord,flt_Z_Coord,flt_NotUsed;
             variable int_PositionCount, int_Count, str_SQL, bln_Used;
             file SortFile;
             SortFile.RemoveFields();
             str_SQL = "SELECT LAB_ID, COUNT(*) AS N FROM SORT WHERE USED = 0 GROUP BY LAB_ID ORDER BY COUNT(*) ASC";
             SortFile.AddField("N", int_Count, hslInteger);
             SortFile.AddField("LAB_ID", str_LabID, hslString, 255);
             SortFile.SetExtendedProperties("HDR=YES");
             SortFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
             while(SortFile.Eof() == 0)
             {
                  SortFile.ReadRecord();
                  if(int_Count < 96)
                  {
                       arr_PartialLabID.AddAsLast(str_LabID);
                       arr_PartialCount.AddAsLast(int_Count);
                  }
             }
             SortFile.Close();
             SortFile.RemoveFields();
        }
        Util2::Debug::TraceArray_2(Translate("Partial Racks           Count"), arr_PartialLabID, arr_PartialCount);
        int_TotalPartial=arr_PartialCount.GetSize();
        int_TotalPartial = int_TotalPartial - 1;
        if (int_TotalPartial <= 0)
        {
          break;
        }
        int_ChannelsSet = 0;
        {
          for(int_ChannelIndex = 0; int_ChannelIndex < int_TotalChannels;)
          {
            int_ChannelIndex = int_ChannelIndex + 1;
            int_ChannelEnabled=arr_ChannelPattern.GetAt(int_ChannelIndex-1);
            if (int_ChannelEnabled == 1)
            {
              bln_ValueFound = BOOLEON::FALSE;
              flt_YMax=arr_YMax.GetAt(int_ChannelIndex-1);
              flt_YMin=arr_YMin.GetAt(int_ChannelIndex-1);
              {
                for(int_LabIndex = 0; int_LabIndex < int_TotalPartial;)
                {
                  int_LabIndex = int_LabIndex + 1;
                  str_CurrentLabID=arr_PartialLabID.GetAt(int_LabIndex-1);
                  {
                       variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition,int_FilledLocation,int_Position,flt_X_Coord,flt_Y_Coord,flt_Z_Coord,flt_NotUsed;
                       variable int_PositionCount, int_Count, str_SQL, bln_Used, int_Index, a;
                       file SortFile;
                       SortFile.RemoveFields();
                       SortFile.AddField("N", int_Count, hslInteger);
                       flt_YMax = StrConcat2(flt_YMax, "");
                       flt_YMin = StrConcat2(flt_YMin, "");
                       str_SQL = "SELECT COUNT(*) AS N FROM SORT WHERE LAB_ID = '" + str_CurrentLabID + "' AND USED = 0 AND Y_COORD <= " + flt_YMax + " AND Y_COORD >= "+ flt_YMin;
                       SortFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
                       SortFile.ReadRecord();
                       SortFile.Close();
                       SortFile.RemoveFields();
                    //Trace("Count:  ",int_Count);
                       if(int_Count > 0)
                       {
                            SortFile.AddField("INDEX", int_Index, hslInteger);
                            SortFile.AddField("LAB_ID", str_LabID, hslString, 255);
                            SortFile.AddField("POS_ID", str_PosID, hslString, 255);
                            str_SQL = "SELECT INDEX, LAB_ID, POS_ID FROM SORT WHERE LAB_ID = '" + str_CurrentLabID + "' AND USED = 0 AND Y_COORD <= " + flt_YMax + " AND Y_COORD >= "+ flt_YMin + " ORDER BY X_COORD DESC, Y_COORD DESC";
                      //Trace(str_SQL);
                            SortFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
                            while(SortFile.Eof() == 0)
                            {
                                 SortFile.ReadRecord();
                                 if(!Util::Lookup(arr_UsedIndex,int_Index,a))
                                 {
                                       SeqAdd(seq_TipsPutDown, Translate(str_LabID), Translate(str_PosID));
                                       int_ChannelsSet = int_ChannelsSet + 1;
                                       arr_PutDownIndex.AddAsLast(int_Index);
                                       arr_UsedIndex.AddAsLast(int_Index);
                                       bln_ValueFound = hslTrue;
                        //Trace("Add position:  ",str_PosID);
                                       break;
                        //Trace("Lab ID:  ",str_LabID,"  Channel pickup Lab:  ",arr_PickUpLabware.GetAt(int_ChannelsSet));
                                    //if(arr_PickUpLabware.GetAt(int_ChannelsSet)!= str_CurrentLabID)
                                    //{
                                       //SeqAdd(seq_TipsPutDown, Translate(str_LabID), Translate(str_PosID));
                                       //int_ChannelsSet = int_ChannelsSet + 1;
                                       //arr_PutDownIndex.AddAsLast(int_Index);
                                       //arr_UsedIndex.AddAsLast(int_Index);
                                       //bln_ValueFound = hslTrue;
                                       //break;
                                    //}
                                    //else
                                    //{
                                       //arr_ChannelPattern.SetAt(int_ChannelIndex-1,0);
                                       //break;
                                    //}
                                 }
                            }
                            SortFile.Close();
                            SortFile.RemoveFields();
                       }
                  }
                  if (bln_ValueFound == BOOLEON::FALSE)
                  {
                    arr_ChannelPattern.SetAt(int_ChannelIndex-1, 0);
                  }
                  if (int_ChannelsSet == int_TotalChannels)
                  {
                    break;
                  }
                  if (bln_ValueFound == BOOLEON::TRUE)
                  {
                    break;
                  }
                }
              }
            }
          }
        }
        seq_TipsPutDown.SetCurrentPosition(1);
        if(0){
          Util2::Debug::TraceSequence(seq_TipsPickUp);
          Util2::Debug::TraceSequence(seq_TipsPutDown);
          Util2::Debug::TraceArray(Translate("Channel Active"), arr_ChannelPattern);
          Util2::Debug::TraceArray(Translate("Pick up Index"), arr_PickUpIndex);
        }
        str_ChannelPattern = Translate("");
        {
          for(int_ChannelIndex = 0; int_ChannelIndex < int_TotalChannels;)
          {
            int_ChannelIndex = int_ChannelIndex + 1;
            str_ChannelPattern = StrConcat4(str_ChannelPattern, arr_ChannelPattern.ElementAt( int_ChannelIndex -1), Translate(""), Translate(""));
          }
        }
        TRACE::TRACE02(Translate("Channel Pattern:  "), str_ChannelPattern);
        ML_STAR._AFA41E7B_21AC_4a24_804E_41716114FEC3("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"); // XLTipPickUp
        ML_STAR._7F970BA7_528E_4283_807A_325DED0C065A("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"); // XLTipEject
        int_TotalUpdates=arr_PickUpIndex.GetSize();
        {
             variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition,int_FilledLocation,int_Position,flt_X_Coord,flt_Y_Coord,flt_Z_Coord,flt_NotUsed;
             variable int_PositionCount, int_Count, str_SQL, bln_UseOptimization, int_Index, str_InValue, flt_XCoord, int_Group, a, int_ChannelCount, int_UpdateCount;
             file UpdateFile;
             UpdateFile.RemoveFields();
             str_InValue = "(";
             int_UpdateCount = 0;
             for(i=0;i<int_TotalChannels;i++)
             {
                  if(arr_ChannelPattern.GetAt(i) == 1)
                  {
                       int_Index = arr_PickUpIndex.GetAt(int_UpdateCount);
                       if(int_UpdateCount > 0) str_InValue = str_InValue + ", ";
                       str_InValue = StrConcat2(str_InValue , int_Index);
                       int_ChannelCount = int_ChannelCount + 1;
                       int_UpdateCount = int_UpdateCount + 1;
                       if(int_UpdateCount>int_TotalUpdates) break;
                  }
             }
             str_InValue = str_InValue + ")";
             if(int_UpdateCount > 0)
             {
                  str_SQL = "UPDATE SORT SET USED = -1 WHERE INDEX IN" + str_InValue;
            //Trace(str_SQL);
                  UpdateFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
                  UpdateFile.Close();
                  UpdateFile.RemoveFields();
             }
        }
        int_TotalUpdates=arr_PutDownIndex.GetSize();
        {
             variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition,int_FilledLocation,int_Position,flt_X_Coord,flt_Y_Coord,flt_Z_Coord,flt_NotUsed;
             variable int_PositionCount, int_Count, str_SQL, bln_UseOptimization, int_Index, str_InValue, flt_XCoord, int_Group, a, int_ChannelCount, int_UpdateCount;
             file UpdateFile;
             UpdateFile.RemoveFields();
             str_InValue = "(";
             int_UpdateCount = 0;
             for(i=0;i<int_TotalChannels;i++)
             {
                  if(arr_ChannelPattern.GetAt(i) == 1)
                  {
                       int_Index = arr_PutDownIndex.GetAt(int_UpdateCount);
                       if(int_UpdateCount > 0) str_InValue = str_InValue + ", ";
                       str_InValue = StrConcat2(str_InValue , int_Index);
                       int_ChannelCount = int_ChannelCount + 1;
                       int_UpdateCount = int_UpdateCount + 1;
                       if(int_UpdateCount>int_TotalUpdates) break;
                  }
             }
             str_InValue = str_InValue + ")";
             if(int_UpdateCount > 0)
             {
                  str_SQL = "UPDATE SORT SET USED = 2 WHERE INDEX IN" + str_InValue;
            //Trace(str_SQL);
                  UpdateFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
                  UpdateFile.Close();
                  UpdateFile.RemoveFields();
             }
        }
      }
    }
    SeqRemoveAll(io_seq_Tips);
    SeqRemoveAll(seq_TipsEmpty);
    {
         variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition,int_FilledLocation,int_Position,flt_X_Coord,flt_Y_Coord,flt_Z_Coord,flt_NotUsed;
         variable int_PositionCount, int_Group, int_ChannelIndex, flt_CurrentX, bln_Used;
         file ReadFile;
         ReadFile.RemoveFields();
         ReadFile.AddField("INDEX", int_PositionCount, hslInteger);
         ReadFile.AddField("USED", bln_Used, hslInteger);
         ReadFile.AddField("LAB_ID", str_LabID, hslString, 255);
         ReadFile.AddField("POS_ID", str_PosID, hslString, 255);
         ReadFile.AddField("X_COORD", flt_X_Coord, hslFloat);
         ReadFile.AddField("Y_COORD", flt_Y_Coord, hslFloat);
         ReadFile.AddField("Z_COORD", flt_Z_Coord, hslFloat);
         ReadFile.AddField("GROUP",int_Group,hslInteger);
         int_TotalValues = seq_TipsRemaining.GetTotal();
         ReadFile.SetExtendedProperties("HDR=YES");
         ReadFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead);
         int_PositionCount = 1;
         int_Group = 0;
         bln_Used = 1;
         while(ReadFile.Eof() == 0)
         {
              ReadFile.ReadRecord();
              if(bln_Used > 0)
              {
                   SeqAdd(io_seq_Tips, Translate(str_LabID), Translate(str_PosID));
              }
              else
              {
                   SeqAdd(seq_TipsEmpty, Translate(str_LabID), Translate(str_PosID));
              }
         }
         ReadFile.Close();
         ReadFile.RemoveFields();
    }
    io_seq_Tips.SetCurrentPosition(1);
    DeckVisualize::UpdateUsedPositions(ML_STAR, io_seq_Tips, 5, Translate("With Tips"));
    DeckVisualize::UpdateUsedPositions(ML_STAR, seq_TipsEmpty, 4, Translate("No Tips"));
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
  }

  function Optimized5mLTipPickup2( device & ML_STAR, sequence & io_seq_TipSequence, variable i_str_TipCounter, variable i_str_ChannelPattern ) void {
    private dialog customDialog_10;
    private variable int_ChannelSet;
    private variable flt_NotUsed;
    private variable flt_CurrentX;
    private variable flt_CurrentY;
    private variable flt_TipCapacity;
    private variable flt_YRaster;
    private variable int_TotalOptions;
    private variable _strFunctionName;
    private variable bln_OptimizationNeeded;
    private variable str_LabID;
    private variable bool_FileExists;
    private variable flt_PreviousY;
    private variable str_TipMessage;
    private variable flt_TargetX;
    private variable str_TempSortingFilePath;
    private variable int_ChannelActive;
    private variable int_TotalChannels;
    private variable int_ChannelValue;
    private variable int_ChannelIndex;
    private variable int_TipsNeeded;
    private variable bln_EnoughTipsLoaded;
    private variable str_PosID;
    private variable str_Value;
    private variable str_TipName;
    private sequence seq_RemainingSequence;
    private variable arr_GroupedXCoords[];
    private variable arr_GroupNumber[];
    private variable arr_ChannelPattern[];
    private variable arr_YMin[];
    private variable arr_YMax[];
    private variable arr_GroupedCounts[];
    private variable arr_GroupedLabID[];
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::TRUE, BOOLEON::TRUE);
    Get5mLChannelCount(ML_STAR, int_TotalChannels);
    HELPERLIBRARY::GetChannelLimits(ML_STAR, 1, arr_YMax, arr_YMin, flt_YRaster);
    int_TipsNeeded = StrReplace(i_str_ChannelPattern, Translate("1"), Translate("1"));
    i_str_ChannelPattern = StrFillRight(i_str_ChannelPattern, Translate("0"), int_TotalChannels);
    arr_ChannelPattern.SetSize(0);
    {
      for(int_ChannelIndex = 0; int_ChannelIndex < int_TotalChannels;)
      {
        int_ChannelIndex = int_ChannelIndex + 1;
        str_Value = StrLeft(i_str_ChannelPattern, int_ChannelIndex);
        str_Value = StrRight(str_Value, 1);
        int_ChannelValue = StrIVal(str_Value);
        arr_ChannelPattern.AddAsLast(int_ChannelValue);
      }
    }
    if (int_TipsNeeded == 0)
    {
      TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
      return;
    }
    {
      while (BOOLEON::TRUE == BOOLEON::TRUE)
      {
        TipCheck(ML_STAR, io_seq_TipSequence, i_str_TipCounter, int_TipsNeeded);
        SeqCopySequence(seq_RemainingSequence, io_seq_TipSequence);
        HELPERLIBRARY::RemoveTruncatedSequencePositions(ML_STAR, seq_RemainingSequence);
        HELPERLIBRARY::GetTempSortingFilePath(str_TempSortingFilePath);
        bool_FileExists = HSLExtensions::File::Exists(str_TempSortingFilePath);
        if (bool_FileExists == 1)
        {
          HSLExtensions::File::Delete(str_TempSortingFilePath);
        }
        bln_OptimizationNeeded = BOOLEON::FALSE;
        int_ChannelSet = 1;
        {
          for(int_ChannelIndex = 0; int_ChannelIndex < int_TotalChannels;)
          {
            int_ChannelIndex = int_ChannelIndex + 1;
            int_ChannelActive=arr_ChannelPattern.GetAt(int_ChannelIndex-1);
            if (int_ChannelActive == 1)
            {
              str_LabID = SeqGetLabwareId(seq_RemainingSequence);
              str_PosID = SeqGetPositionId(seq_RemainingSequence);
              SeqIncrement(seq_RemainingSequence, 1);
              DevGetLabwarePositionEx(ML_STAR, str_LabID, str_PosID, flt_CurrentX, flt_CurrentY, flt_NotUsed, flt_NotUsed);
              if (flt_CurrentY <= arr_YMax.ElementAt( int_ChannelIndex -1))
              {
                if (flt_CurrentY >= arr_YMin.ElementAt( int_ChannelIndex -1))
                {
                  if (int_ChannelSet == 1)
                  {
                    flt_TargetX = flt_CurrentX;
                    flt_PreviousY = flt_CurrentY;
                    int_ChannelSet = int_ChannelSet + 1;
                  }
                  else
                  {
                    if (flt_CurrentX != flt_TargetX)
                    {
                      bln_OptimizationNeeded = BOOLEON::TRUE;
                      break;
                    }
                    if (flt_CurrentY > flt_PreviousY)
                    {
                      bln_OptimizationNeeded = BOOLEON::TRUE;
                      break;
                    }
                    int_ChannelSet = int_ChannelSet + 1;
                  }
                }
                else
                {
                  bln_OptimizationNeeded = BOOLEON::TRUE;
                  break;
                }
              }
              else
              {
                bln_OptimizationNeeded = BOOLEON::TRUE;
                break;
              }
            }
            flt_PreviousY = flt_PreviousY - flt_YRaster;
          }
        }
        seq_RemainingSequence.SetCurrentPosition(1);
        if (bln_OptimizationNeeded == BOOLEON::TRUE)
        {
          MECC::TraceComment(Translate("OPTIMIZE NEEDED!"));
          HELPERLIBRARY::SortSequence(ML_STAR, seq_RemainingSequence, BOOLEON::FALSE);
          {
               variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition,int_FilledLocation,int_Position,flt_X_Coord,flt_Y_Coord,flt_Z_Coord,flt_NotUsed;
               variable int_PositionCount, int_Group, int_ChannelIndex, flt_CurrentX, bln_Used;
               file WriteFile;
               WriteFile.RemoveFields();
               WriteFile.AddField("INDEX", int_PositionCount, hslInteger);
               WriteFile.AddField("USED", bln_Used, hslInteger);
               WriteFile.AddField("LAB_ID", str_LabID, hslString, 255);
               WriteFile.AddField("POS_ID", str_PosID, hslString, 255);
               WriteFile.AddField("X_COORD", flt_X_Coord, hslFloat);
               WriteFile.AddField("Y_COORD", flt_Y_Coord, hslFloat);
               WriteFile.AddField("Z_COORD", flt_Z_Coord, hslFloat);
               WriteFile.AddField("GROUP",int_Group,hslInteger);
               int_TotalValues = seq_RemainingSequence.GetTotal();
               WriteFile.SetExtendedProperties("HDR=YES");
               WriteFile.Open(str_TempSortingFilePath + " " + "SORT", hslWrite);
               int_PositionCount = 1;
               int_Group = 0;
               flt_CurrentX = -100.0;
               for(i = 0; i < int_TotalValues;)
               {
                    i = i + 1;
                    int_ChannelIndex = int_ChannelIndex + 1;
                    seq_RemainingSequence.SetCurrentPosition(i);
                    str_LabID = seq_RemainingSequence.GetLabwareId();
                    str_PosID = seq_RemainingSequence.GetPositionId();
                    DevGetLabwarePositionEx(ML_STAR, str_LabID, str_PosID, flt_X_Coord, flt_Y_Coord, flt_Z_Coord, flt_NotUsed);
                    if(flt_CurrentX != flt_X_Coord)
                    {
                         flt_CurrentX = flt_X_Coord;
                         int_Group = int_Group + 1;
                         int_ChannelIndex = 1;
                    }
                    if(int_ChannelIndex > int_TotalChannels)
                    {
                         int_ChannelIndex = 1;
                         flt_CurrentX = flt_X_Coord;
                         int_Group = int_Group + 1;
                    }
                    WriteFile.WriteRecord();
                    int_PositionCount = int_PositionCount + 1;
               }
               WriteFile.Close();
               WriteFile.RemoveFields();
          }
          if(0){
            arr_GroupedLabID.SetSize(0);
            arr_GroupedXCoords.SetSize(0);
          }
          arr_GroupNumber.SetSize(0);
          arr_GroupedCounts.SetSize(0);
          {
               variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition,int_FilledLocation,int_Position,flt_X_Coord,flt_Y_Coord,flt_Z_Coord,flt_NotUsed;
               variable int_PositionCount, int_Count, str_SQL, int_Group;
               file SortFile;
            SortFile.RemoveFields();
                  //str_SQL = "SELECT [GROUP], Y_COORD, COUNT(*) AS N FROM (SELECT * FROM SORT ORDER BY Y_COORD DESC, X_COORD ASC) GROUP BY [GROUP], Y_COORD ORDER BY Y_COORD DESC";
                  str_SQL = "SELECT [GROUP], N FROM (SELECT [GROUP], COUNT(*) AS N FROM SORT GROUP BY [GROUP]) ORDER BY [GROUP] ASC";
                  //SortFile.AddField("LAB_ID", str_LabID, hslString, 255);
                  SortFile.AddField("GROUP", int_Group, hslFloat);
                  SortFile.AddField("N", int_Count, hslInteger);
                  int_TotalValues = seq_RemainingSequence.GetTotal();
                  SortFile.SetExtendedProperties("HDR=YES");
                  SortFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
                  str_LabID = "";
                  flt_Y_Coord = 0.0;
                  while(SortFile.Eof() == 0)
                  {
                       SortFile.ReadRecord();
                       arr_GroupNumber.AddAsLast(int_Group);
                       arr_GroupedCounts.AddAsLast(int_Count);
                  }
                  SortFile.Close();
                  SortFile.RemoveFields();
          }
          int_TotalOptions=arr_GroupedCounts.GetSize();
          if(0){
            Util2::Debug::TraceArray_2(Translate("Counts           Group"), arr_GroupedCounts, arr_GroupNumber);
            Util2::Debug::TraceArray_3(Translate("Counts     Lab          X"), arr_GroupedCounts, arr_GroupedLabID, arr_GroupedXCoords);
          }
          {
               variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition,int_FilledLocation,int_Position,flt_X_Coord,flt_Y_Coord,flt_Z_Coord,flt_NotUsed;
               variable int_PositionCount, int_Count, str_SQL, bln_UseOptimization, int_Index, str_InValue, flt_XCoord, int_Group, a, int_ChannelCount, int_UpdateCount, int_ChannelIndex;
               variable flt_PreviousY;
               file SortFile, UpdateFile;
               bln_UseOptimization = hslFalse;
               SortFile.RemoveFields();
               SortFile.AddField("INDEX", int_Index, hslInteger);
               SortFile.AddField("LAB_ID", str_LabID, hslString, 255);
               SortFile.AddField("X_COORD", flt_X_Coord, hslFloat);
               SortFile.AddField("Y_COORD", flt_X_Coord, hslFloat);
               SortFile.AddField("GROUP", int_Group, hslInteger);
               str_SQL = "SELECT INDEX, LAB_ID, X_COORD, Y_COORD, [GROUP] FROM SORT ORDER BY LAB_ID ASC, Y_COORD DESC, X_COORD ASC";
               SortFile.SetExtendedProperties("HDR=YES");
               SortFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
               while(SortFile.Eof() == 0)
               {
                    SortFile.ReadRecord();
                    //Util::Lookup(arr_GroupedCounts,int_Group,a);
                    //Trace("Group:  ", int_Group,"  Count:  ",arr_GroupedCounts.GetAt(int_Group-1),"  Tips needed:  ",int_TipsNeeded);
                    if(arr_GroupedCounts.GetAt(int_Group-1) >= int_TipsNeeded)
                    {
                         int_Group = StrConcat2(int_Group,"");
                         bln_UseOptimization = hslTrue;
                         break;
                    }
               }
               //int_Index = StrConcat2(int_Index,"");
               SortFile.Close();
               SortFile.RemoveFields();
            //Trace("Lab ID:  ",str_LabID,"  X Coord:  ",flt_XCoord);
            //Trace("Group:  ",int_Group);
            //Trace("Use Optimization:  ",bln_UseOptimization);
            if(bln_UseOptimization == hslTrue)
            {
                 str_SQL = "SELECT INDEX, LAB_ID, POS_ID, X_COORD, Y_COORD, [GROUP] FROM SORT WHERE [GROUP] = " + int_Group + " ORDER BY X_COORD ASC, Y_COORD DESC";
                 SortFile.RemoveFields();
                 SortFile.AddField("INDEX", int_Index, hslInteger);
                 SortFile.AddField("LAB_ID", str_LabID, hslString, 255);
                 SortFile.AddField("X_COORD", flt_X_Coord, hslFloat);
                 SortFile.AddField("Y_COORD", flt_Y_Coord, hslFloat);
                 SortFile.AddField("GROUP",int_Group, hslInteger);
                 SortFile.SetExtendedProperties("HDR=YES");
                 SortFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
                 i = 0;
                 int_ChannelIndex = 1;
                 str_InValue = "(";
                 flt_PreviousY = 9999.9;
                 while(SortFile.Eof() == 0)
                 {
                      if(i > int_TipsNeeded) break;
                      SortFile.ReadRecord();
                      if(arr_ChannelPattern.GetAt(int_ChannelIndex-1)==1)
                      {
                           if(i==0) flt_PreviousY = flt_Y_Coord + flt_YRaster;
                           if(flt_Y_Coord <= flt_PreviousY - flt_YRaster)
                           {
                                i = i + 1;
                                if(i > 1) str_InValue = str_InValue + ", ";
                                str_InValue = StrConcat2(str_InValue , int_Index);
                                int_ChannelIndex = int_ChannelIndex + 1;
                           }
                      }
                      else
                      {
                           int_ChannelIndex = int_ChannelIndex + 1;
                      }
                 }
                 str_InValue = str_InValue + ")";
                 SortFile.Close();
                 SortFile.RemoveFields();
                 UpdateFile.RemoveFields();
                 str_SQL = "UPDATE SORT SET USED = 2 WHERE INDEX IN" + str_InValue;
              //Trace(str_SQL);
                 UpdateFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
                 UpdateFile.Close();
                 UpdateFile.RemoveFields();
            }
            else
            {
                 str_SQL = "SELECT INDEX, LAB_ID, POS_ID, X_COORD, Y_COORD FROM SORT ORDER BY X_COORD ASC, Y_COORD DESC";
                 SortFile.RemoveFields();
                 SortFile.AddField("INDEX", int_Index, hslInteger);
                 SortFile.AddField("LAB_ID", str_LabID, hslString, 255);
                 SortFile.AddField("X_COORD", flt_X_Coord, hslFloat);
                 SortFile.AddField("Y_COORD", flt_Y_Coord, hslFloat);
                 SortFile.SetExtendedProperties("HDR=YES");
                 SortFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
                    i = 0;
                 str_InValue = "(";
                 int_ChannelCount = 1;
                 int_UpdateCount = 0;
                 int_ChannelIndex = 1;
                 while(SortFile.Eof() == 0)
                 {
                      //loop(int_TotalChannels)
                      //{
                         //if(int_ChannelIndex > int_TotalChannels) break;
                         //if(arr_ChannelPattern.GetAt(int_ChannelIndex)==1)
                         //{
                            //break;
                         //}
                         //int_ChannelIndex = int_ChannelIndex + 1;
                      //}
                      if(int_ChannelIndex > int_TotalChannels) break;
                      SortFile.ReadRecord();
                      i = i + 1;
                      if(int_ChannelCount > int_TipsNeeded) break;
                      if(flt_Y_Coord <= arr_YMax.GetAt(int_ChannelIndex-1))
                      {
                           if(flt_Y_Coord >= arr_YMin.GetAt(int_ChannelIndex-1))
                           {
                                if(int_ChannelCount > 1) str_InValue = str_InValue + ", ";
                                str_InValue = StrConcat2(str_InValue , int_Index);
                                int_ChannelCount = int_ChannelCount + 1;
                                int_UpdateCount = int_UpdateCount + 1;
                                int_ChannelIndex = int_ChannelIndex + 1;
                           }
                      }
                 }
                 str_InValue = str_InValue + ")";
                 SortFile.Close();
                 SortFile.RemoveFields();
                 if(int_UpdateCount>0)
                 {
                      UpdateFile.RemoveFields();
                      str_SQL = "UPDATE SORT SET USED = 2 WHERE INDEX IN" + str_InValue;
                      UpdateFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
                      UpdateFile.Close();
                      UpdateFile.RemoveFields();
                 }
            }
          }
          SeqRemoveAll(io_seq_TipSequence);
          {
               variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition,int_FilledLocation,int_Position,flt_X_Coord,flt_Y_Coord,flt_Z_Coord,flt_NotUsed;
               variable int_PositionCount, int_Count, str_SQL, bln_Used;
               file SortFile;
               SortFile.RemoveFields();
               str_SQL = "SELECT USED, LAB_ID, POS_ID FROM SORT ORDER BY USED DESC, LAB_ID ASC, X_COORD ASC, Y_COORD DESC";
               SortFile.AddField("USED", bln_Used, hslInteger);
               SortFile.AddField("LAB_ID", str_LabID, hslString, 255);
               SortFile.AddField("POS_ID", str_PosID, hslString, 255);
               SortFile.SetExtendedProperties("HDR=YES");
               SortFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
               while(SortFile.Eof() == 0)
               {
                    SortFile.ReadRecord();
                    SeqAdd(io_seq_TipSequence, Translate(str_LabID), Translate(str_PosID));
               }
               SortFile.Close();
               SortFile.RemoveFields();
          }
          io_seq_TipSequence.SetCurrentPosition(1);
          bln_EnoughTipsLoaded = BOOLEON::TRUE;
          {
               variable int_TotalValues, i,str_LabID,str_PosID,int_CurrentPosition,int_FilledLocation,int_Position,flt_X_Coord,flt_Y_Coord,flt_Z_Coord,flt_NotUsed;
               variable int_PositionCount, int_Count, str_SQL;
               file SortFile;
               SortFile.RemoveFields();
               str_SQL = "SELECT COUNT(*) AS N FROM SORT WHERE USED = 2";
               SortFile.AddField("N", int_Count, hslInteger);
               SortFile.SetExtendedProperties("HDR=YES");
               SortFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead,str_SQL);
               SortFile.ReadRecord();
               SortFile.Close();
               SortFile.RemoveFields();
               if(int_Count < int_TipsNeeded) bln_EnoughTipsLoaded = hslFalse;
          }
          if (bln_EnoughTipsLoaded == BOOLEON::FALSE)
          {
            MECC::TraceComment(Translate("------------------  Insufficient tips found"));
            TipCapacityCheck(ML_STAR, io_seq_TipSequence, flt_TipCapacity);
            if (flt_TipCapacity == 0.0)
            {
              flt_TipCapacity = Translate("Unknown");
            }
            str_TipName = StrConcat4(flt_TipCapacity, Translate(" uL Tips"), Translate(""), Translate(""));
            str_TipMessage = StrConcat4(Translate("Please load more "), str_TipName, Translate(" on to the deck."), Translate(""));
            customDialog_10.InitCustomDialog("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");
            customDialog_10.SetCustomDialogProperty( "textBlock2.Text", str_TipMessage );
            customDialog_10.ShowCustomDialog();
            ResetInputSequence(ML_STAR, io_seq_TipSequence);
            TipCounter_Edit(ML_STAR, io_seq_TipSequence, i_str_TipCounter, 99999);
          }
          else
          {
            break;
          }
        }
        else
        {
          break;
        }
      }
    }
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
  }

  function TipCountNeeded_Reset( variable i_str_TipCounter ) void {
    private variable int_Index;
    if (TT_GLOBAL_VARIABLES::TIP_COUNT::LIBRARY_INITIALIZED == BOOLEON::FALSE)
    {
      TT_GLOBAL_VARIABLES::TIP_COUNT::InitializeVariables();
      TT_GLOBAL_VARIABLES::TIP_COUNT::TIP_COUNT_NEEDED.SetSize(0);
      TT_GLOBAL_VARIABLES::TIP_COUNT::TIP_COUNTER.SetSize(0);
      TT_GLOBAL_VARIABLES::TIP_COUNT::LIBRARY_INITIALIZED = BOOLEON::TRUE;
    }
    int_Index = _Lookup(TT_GLOBAL_VARIABLES::TIP_COUNT::TIP_COUNTER, i_str_TipCounter);
    if (int_Index == 0)
    {
      TT_GLOBAL_VARIABLES::TIP_COUNT::TIP_COUNTER.AddAsLast(i_str_TipCounter);
      TT_GLOBAL_VARIABLES::TIP_COUNT::TIP_COUNT_NEEDED.AddAsLast(0);
    }
    else
    {
      TT_GLOBAL_VARIABLES::TIP_COUNT::TIP_COUNT_NEEDED.SetAt(int_Index-1, 0);
    }
  }

  private function ABSTRACT(  ) void {
  }

  private function _GetSequenceName( device & Instrument, sequence i_seq_SequenceToCheck, variable & o_strSequenceName, variable & o_intTotalPositions ) void {
    o_strSequenceName = 0;
    o_intTotalPositions = 0;
    o_intTotalPositions = 0;
    o_strSequenceName = 0;
    {
         Instrument.CopyResetSequence(i_seq_SequenceToCheck.GetName(),i_seq_SequenceToCheck);
         o_strSequenceName = i_seq_SequenceToCheck.GetName();
         o_intTotalPositions = i_seq_SequenceToCheck.GetCount();
    }
  }

  function GetTipCounter( device & ML_STAR, sequence & io_seqTips, variable & o_strTipCounter ) void {
    private variable l_strSequenceName;
    private variable l_intTotalPositions;
    private variable l_blnLiquidClassExists;
    private variable _strFunctionName;
    private variable l_intTipType;
    private variable l_strInstrumentClass;
    private variable l_arrListOfTipCounters[];
    private variable l_strLabID;
    o_strTipCounter = 0;
    _strFunctionName = Translate("");
    _strFunctionName = GetFunctionName();
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::TRUE, BOOLEON::TRUE);
    o_strTipCounter = Translate("");
    l_arrListOfTipCounters.SetSize(0);
    TIP_COUNTER::InitTipCountingLibrary();
    _GetSequenceName(ML_STAR, io_seqTips, l_strSequenceName, l_intTotalPositions);
    o_strTipCounter = l_strSequenceName;
    TRACE::TRACE08(Translate("     Sequence:  "), l_strSequenceName, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    l_strLabID = SeqGetLabwareId(io_seqTips);
    _GetTipType(ML_STAR, l_strLabID, l_intTipType);
    l_strInstrumentClass = DevGetInstrumentName(ML_STAR);
    l_blnLiquidClassExists = _GetTipCounterName(l_strInstrumentClass, l_intTipType, o_strTipCounter);
    if (l_blnLiquidClassExists == BOOLEON::FALSE)
    {
      o_strTipCounter = l_strSequenceName;
    }
    TRACE::TRACE04(Translate("     "), Translate("Selected Tip Counter:  "), o_strTipCounter, Translate(""));
    TRACE::SUBMETHOD_BLOCK(_strFunctionName, BOOLEON::FALSE, BOOLEON::TRUE);
  }

  private function _GetTipCounterName( variable i_strInstrumentClass, variable i_intTipType, variable & o_strTipCounterName ) variable {
    private variable l_strModified;
    private variable l_intID;
    private variable l_intNum;
    private variable l_strLabwareType;
    private variable l_strSystemFolder;
    private variable l_strName;
    private variable l_strSQL;
    private variable l_strTipCounterDatabase;
    private variable l_strSimulationModified;
    private variable l_strInstrumentClass;
    private file l_hdlFile;
    o_strTipCounterName = 0;
    o_strTipCounterName = Translate("");
    l_strSystemFolder = FilGetSystemPath();
    l_strTipCounterDatabase = StrConcat4(l_strSystemFolder, Translate("\\"), Translate("HxElementCounter"), Translate(".mdb"));
    l_strSQL = StrConcat8(Translate("SELECT COUNT(*) AS N FROM [ElementCounters] WHERE [InstrumentClass]= '"), i_strInstrumentClass, Translate("' AND [LabwareType] = '"), i_intTipType, Translate("'"), Translate(""), Translate(""), Translate(""));
    TRACE::TRACE02(Translate("Database:  "), l_strTipCounterDatabase);
    l_hdlFile.AddField("N", l_intNum, hslInteger);
    if( 0 == l_hdlFile.Open(l_strTipCounterDatabase + " " + "ElementCounters", hslRead, l_strSQL) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, l_strTipCounterDatabase, "HxMetEdCompCmd");
    }
    if( 0 == l_hdlFile.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != l_hdlFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    l_hdlFile.RemoveFields();
    if (l_intNum == 0)
    {
      return (BOOLEON::FALSE);
    }
    l_strSQL = StrConcat8(Translate("SELECT * FROM [ElementCounters] WHERE [InstrumentClass]= '"), i_strInstrumentClass, Translate("' AND [LabwareType] = '"), i_intTipType, Translate("' ORDER BY [ID] ASC"), Translate(""), Translate(""), Translate(""));
    l_hdlFile.AddField("ID", l_intID, hslInteger);
    l_hdlFile.AddField("Name", l_strName, hslString, 255);
    l_hdlFile.AddField("InstrumentClass", l_strInstrumentClass, hslString, 50);
    l_hdlFile.AddField("LabwareType", l_strLabwareType, hslString, 50);
    l_hdlFile.AddField("Modified", l_strModified, hslInteger);
    l_hdlFile.AddField("SimulationModified", l_strSimulationModified, hslInteger);
    if( 0 == l_hdlFile.Open(l_strTipCounterDatabase + " " + "ElementCounters", hslRead, l_strSQL) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, l_strTipCounterDatabase, "HxMetEdCompCmd");
    }
    if( 0 == l_hdlFile.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != l_hdlFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    l_hdlFile.RemoveFields();
    o_strTipCounterName = l_strName;
    return (BOOLEON::TRUE);
  }

  private function _SortSequenceLabIDXY( device & Instrument, sequence & io_Sequence ) void {
    private variable str_TempSortingFilePath;
    private variable str_SQL_Sort;
    HELPERLIBRARY::GetTempSortingFilePath(str_TempSortingFilePath);
    str_SQL_Sort = StrConcat4(Translate("SELECT * FROM SORT ORDER BY LAB_ID ASC, X_COORD ASC, Y_COORD DESC"), Translate(""), Translate(""), Translate(""));
    {
         variable int_CurrentPosition;
         variable int_TotalSequencePositions;
         sequence seq_AdjustedSequence;
         variable i;
         file WriteFile;
         file ReadFile;
         variable str_LabID;
         variable str_PosID;
         variable flt_X;
         variable flt_Y;
         variable arr_Coordinates[];
         int_CurrentPosition = io_Sequence.GetCurrentPosition();
         seq_AdjustedSequence.CopySequence(io_Sequence);
         int_TotalSequencePositions = io_Sequence.GetTotal();
         SeqRemoveAll(io_Sequence);
         WriteFile.RemoveFields();
         WriteFile.AddField("LAB_ID", str_LabID, hslString, 255);
         WriteFile.AddField("POS_ID", str_PosID, hslString, 255);
         WriteFile.AddField("X_COORD", flt_X, hslFloat);
         WriteFile.AddField("Y_COORD", flt_Y, hslFloat);
         if(WriteFile.Open(str_TempSortingFilePath + " " + "SORT", hslWrite))
         {
              for(i = int_CurrentPosition; i <= int_TotalSequencePositions;)
              {
                   if(int_CurrentPosition == 0) break;
                   seq_AdjustedSequence.SetCurrentPosition(i);
                   if(seq_AdjustedSequence.GetLabwareId() != "" && seq_AdjustedSequence.GetPositionId() != "")
                   {
                        str_LabID = seq_AdjustedSequence.GetLabwareId();
                        str_PosID = seq_AdjustedSequence.GetPositionId();
                        Instrument.GetLabwarePosition(str_LabID, arr_Coordinates, str_PosID);
                        flt_X = arr_Coordinates[0];
                        flt_Y = arr_Coordinates[1];
                        WriteFile.WriteRecord();
                   }
                   i = i + 1;
              }
         }
         WriteFile.Close();
         WriteFile.RemoveFields();
         ReadFile.RemoveFields();
         ReadFile.AddField("LAB_ID", str_LabID, hslString, 255);
         ReadFile.AddField("POS_ID", str_PosID, hslString, 255);
         ReadFile.AddField("X_COORD", flt_X, hslFloat);
         ReadFile.AddField("Y_COORD", flt_Y, hslFloat);
         if(ReadFile.Open(str_TempSortingFilePath + " " + "SORT", hslRead, str_SQL_Sort))
         {
              while(ReadFile.Eof() == 0)
              {
                   ReadFile.ReadRecord();
                   io_Sequence.Add(str_LabID,str_PosID);
              }
         }
         else
         {
              Trace("ERROR OCCURRED DURING SORT");
              io_Sequence.CopySequence(seq_AdjustedSequence);
         }
         ReadFile.Close();
         ReadFile.RemoveFields();
         io_Sequence.SetCurrentPosition(1);
    }
  }
} // library namespace
