#pragma once
#include "HSLErrLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace SMARTSTEPCUSTOMERRORHANDLING {
  function Aspirate( device & ML_STAR, variable stepID, sequence & aspirateSequence, variable aspirateSequenceCounting, variable aspirateChannelVariable, variable aspirateChannelUse, variable aspirateMode, variable & aspirateVolumes[], variable aspirateUserDefinedLiquidClass, variable aspirateCLLDSensitivity, variable aspirateSubmergeDepth, variable aspiratePLLDSensitivity, variable aspirateMaxHeightDiff, variable aspirateFluidHeight, variable aspirateLiquidFollowing, variable aspirateMixCycles, variable aspirateMixPosition, variable aspirateMixVolume, variable userResponseTime, variable & rc[] ) void ;
  function Calibrate1536Plate( device & ML_STAR, variable stepID, variable calibrateCarrier, variable calibrateCarrierChannel, variable userResponseTime, variable & rc[] ) void ;
  function Dispense( device & ML_STAR, variable stepID, sequence & dispenseSequence, variable dispenseSequenceCounting, variable dispenseChannelVariable, variable dispenseChannelUse, variable dispenseMode, variable & dispenseVolumes[], variable dispenseUserDefinedLiquidClass, variable dispenseCLLDSensitivity, variable dispenseSubmergeDepth, variable dispenseFluidHeight, variable dispenseLiquidFollowing, variable dispenseMixCycles, variable dispenseMixPosition, variable dispenseMixVolume, variable userResponseTime, variable & rc[] ) void ;
  function Initialize( device & ML_STAR, variable stepID, variable initializeAlways, variable userResponseTime, variable & rc[] ) void ;
  function LoadCarrier( device & ML_STAR, variable stepID, variable loadCarrier, variable loadCarrierBarcodeFileName, variable barcodeReadPositions, variable userResponseTime, variable & rc[] ) void ;
  function PostDispense( device & ML_STAR, variable stepID, sequence & dispenseSequence, variable dispenseSequenceCounting, variable dispenseChannelVariable, variable dispenseChannelUse, variable dispenseMode, variable & dispenseVolumes[], variable dispenseUserDefinedLiquidClass, variable dispenseCLLDSensitivity, variable dispenseSubmergeDepth, variable dispenseFluidHeight, variable dispenseLiquidFollowing, variable dispenseMixCycles, variable dispenseMixPosition, variable dispenseMixVolume, variable userResponseTime, variable & rc[] ) void ;
  function PreDispense( device & ML_STAR, variable stepID, sequence & dispenseSequence, variable dispenseSequenceCounting, variable dispenseChannelVariable, variable dispenseChannelUse, variable dispenseMode, variable & dispenseVolumes[], variable dispenseUserDefinedLiquidClass, variable dispenseCLLDSensitivity, variable dispenseSubmergeDepth, variable dispenseFluidHeight, variable dispenseLiquidFollowing, variable dispenseMixCycles, variable dispenseMixPosition, variable dispenseMixVolume, variable userResponseTime, variable & rc[] ) void ;
  function StartNeedleWash( device & ML_STAR, variable stepID, variable washStation, variable rinseTime1, variable soakTime1, variable flowRate1, variable rinseTime2, variable soakTime2, variable flowRate2, variable drainingTime, variable startWashLiquid, variable userResponseTime, variable & rc[] ) void ;
  function TipEject( device & ML_STAR, variable stepID, variable tipEjectUseDefaultWaste, sequence & tipEjectSequence, variable tipEjectSequenceCounting, variable tipEjectChannelVariable, variable tipEjectChannelUse, variable userResponseTime, variable & rc[] ) void ;
  function TipPickUp( device & ML_STAR, variable stepID, sequence & tipPickupSequence, variable tipPickupSequenceCounting, variable tipPickupChannelVariable, variable tipPickupChannelUse, variable userResponseTime, variable & rc[] ) void ;
  function UnloadCarrier( device & ML_STAR, variable stepID, variable unloadCarrier, variable userResponseTime, variable & rc[] ) void ;
  function WaitNeedleWash( device & ML_STAR, variable stepID, variable washStation, variable userResponseTime, variable & rc[] ) void ;
  private function _throwError( variable description, variable stepID ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function Initialize( device & ML_STAR, variable stepID, variable initializeAlways, variable userResponseTime, variable & rc[] ) void {
    private variable returnValue1;
    private variable returnValue2;
    private variable returnValue3;
    private variable bStepExecuted;
    rc.SetSize( 0);
    rc.SetSize(0);
    bStepExecuted = 0;
    if (stepID == 10)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
        	returnValue1 = arrRetValues[0];
        	returnValue2 = arrRetValues[1];
        	returnValue3 = arrRetValues[2];
      }
      bStepExecuted = 1;
    }
    if (stepID == 11)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
        	returnValue1 = arrRetValues[0];
        	returnValue2 = arrRetValues[1];
        	returnValue3 = arrRetValues[2];
      }
      bStepExecuted = 1;
    }
    if (bStepExecuted == 1)
    {
      rc.AddAsLast(returnValue1);
      rc.AddAsLast(returnValue2);
      rc.AddAsLast(returnValue3);
      return;
    }
    else
    {
      _throwError(Translate("No Initialize Step defined for stepID"), stepID);
    }
  }

  private function _throwError( variable description, variable stepID ) void {
    ErrClear();
    description = "SmartStepCustomErrorHandling.smt > " + description + ": " + IStr(stepID);
    ErrRaise(0, description);
  }

  function TipPickUp( device & ML_STAR, variable stepID, sequence & tipPickupSequence, variable tipPickupSequenceCounting, variable tipPickupChannelVariable, variable tipPickupChannelUse, variable userResponseTime, variable & rc[] ) void {
    private variable returnValue1;
    private variable returnValue2;
    private variable returnValue3;
    private variable bStepExecuted;
    rc.SetSize(0);
    bStepExecuted = 0;
    if (stepID == 10)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        	returnValue1 = arrRetValues[0];
        	returnValue2 = arrRetValues[1];
        	returnValue3 = arrRetValues[2];
      }
      bStepExecuted = 1;
    }
    if (stepID == 11)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        	returnValue1 = arrRetValues[0];
        	returnValue2 = arrRetValues[1];
        	returnValue3 = arrRetValues[2];
      }
      bStepExecuted = 1;
    }
    if (stepID == 12)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        	returnValue1 = arrRetValues[0];
        	returnValue2 = arrRetValues[1];
        	returnValue3 = arrRetValues[2];
      }
      bStepExecuted = 1;
    }
    if (bStepExecuted == 1)
    {
      rc.AddAsLast(returnValue1);
      rc.AddAsLast(returnValue2);
      rc.AddAsLast(returnValue3);
      return;
    }
    else
    {
      _throwError(Translate("No 1000ul Channel Tip Pick Up Step defined for stepID"), stepID);
    }
  }

  function TipEject( device & ML_STAR, variable stepID, variable tipEjectUseDefaultWaste, sequence & tipEjectSequence, variable tipEjectSequenceCounting, variable tipEjectChannelVariable, variable tipEjectChannelUse, variable userResponseTime, variable & rc[] ) void {
    private variable returnValue1;
    private variable returnValue2;
    private variable returnValue3;
    private variable bStepExecuted;
    rc.SetSize(0);
    bStepExecuted = 0;
    if (stepID == 10)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        	returnValue1 = arrRetValues[0];
        	returnValue2 = arrRetValues[1];
        	returnValue3 = arrRetValues[2];
      }
      bStepExecuted = 1;
    }
    if (stepID == 11)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        	returnValue1 = arrRetValues[0];
        	returnValue2 = arrRetValues[1];
        	returnValue3 = arrRetValues[2];
      }
      bStepExecuted = 1;
    }
    if (bStepExecuted == 1)
    {
      rc.AddAsLast(returnValue1);
      rc.AddAsLast(returnValue2);
      rc.AddAsLast(returnValue3);
      return;
    }
    else
    {
      _throwError(Translate("No 1000ul Channel Tip Eject Step defined for stepID"), stepID);
    }
  }

  function Aspirate( device & ML_STAR, variable stepID, sequence & aspirateSequence, variable aspirateSequenceCounting, variable aspirateChannelVariable, variable aspirateChannelUse, variable aspirateMode, variable & aspirateVolumes[], variable aspirateUserDefinedLiquidClass, variable aspirateCLLDSensitivity, variable aspirateSubmergeDepth, variable aspiratePLLDSensitivity, variable aspirateMaxHeightDiff, variable aspirateFluidHeight, variable aspirateLiquidFollowing, variable aspirateMixCycles, variable aspirateMixPosition, variable aspirateMixVolume, variable userResponseTime, variable & rc[] ) void {
    private variable returnValue1;
    private variable returnValue2;
    private variable returnValue3;
    private variable bStepExecuted;
    rc.SetSize(0);
    bStepExecuted = 0;
    if (stepID == 10)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        	returnValue1 = arrRetValues[0];
        	returnValue2 = arrRetValues[1];
        	returnValue3 = arrRetValues[2];
      }
      bStepExecuted = 1;
    }
    if (stepID == 11)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        	returnValue1 = arrRetValues[0];
        	returnValue2 = arrRetValues[1];
        	returnValue3 = arrRetValues[2];
      }
      bStepExecuted = 1;
    }
    if (stepID == 12)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        	returnValue1 = arrRetValues[0];
        	returnValue2 = arrRetValues[1];
        	returnValue3 = arrRetValues[2];
      }
      bStepExecuted = 1;
    }
    if (bStepExecuted == 1)
    {
      rc.AddAsLast(returnValue1);
      rc.AddAsLast(returnValue2);
      rc.AddAsLast(returnValue3);
      return;
    }
    else
    {
      _throwError(Translate("No 1000ul Channel Aspirate Step defined for stepID"), stepID);
    }
  }

  function Dispense( device & ML_STAR, variable stepID, sequence & dispenseSequence, variable dispenseSequenceCounting, variable dispenseChannelVariable, variable dispenseChannelUse, variable dispenseMode, variable & dispenseVolumes[], variable dispenseUserDefinedLiquidClass, variable dispenseCLLDSensitivity, variable dispenseSubmergeDepth, variable dispenseFluidHeight, variable dispenseLiquidFollowing, variable dispenseMixCycles, variable dispenseMixPosition, variable dispenseMixVolume, variable userResponseTime, variable & rc[] ) void {
    private variable returnValue1;
    private variable returnValue2;
    private variable returnValue3;
    private variable bStepExecuted;
    rc.SetSize(0);
    bStepExecuted = 0;
    if (stepID == 10)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        	returnValue1 = arrRetValues[0];
        	returnValue2 = arrRetValues[1];
        	returnValue3 = arrRetValues[2];
      }
      bStepExecuted = 1;
    }
    if (stepID == 11)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        	returnValue1 = arrRetValues[0];
        	returnValue2 = arrRetValues[1];
        	returnValue3 = arrRetValues[2];
      }
      bStepExecuted = 1;
    }
    if (stepID == 12)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        	returnValue1 = arrRetValues[0];
        	returnValue2 = arrRetValues[1];
        	returnValue3 = arrRetValues[2];
      }
      bStepExecuted = 1;
    }
    if (bStepExecuted == 1)
    {
      rc.AddAsLast(returnValue1);
      rc.AddAsLast(returnValue2);
      rc.AddAsLast(returnValue3);
      return;
    }
    else
    {
      _throwError(Translate("No 1000ul Channel Dispense Step defined for stepID"), stepID);
    }
  }

  function LoadCarrier( device & ML_STAR, variable stepID, variable loadCarrier, variable loadCarrierBarcodeFileName, variable barcodeReadPositions, variable userResponseTime, variable & rc[] ) void {
    private variable returnValue1;
    private variable returnValue2;
    private variable returnValue3;
    private variable returnValue4;
    private variable returnValue5;
    private variable returnValue6;
    private variable bStepExecuted;
    rc.SetSize( 0);
    rc.SetSize(0);
    bStepExecuted = 0;
    if (stepID == 10)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
        	returnValue1 = arrRetValues[0];
        	returnValue2 = arrRetValues[1];
        	returnValue3 = arrRetValues[2];
        	returnValue4 = arrRetValues[3];
        	returnValue5 = arrRetValues[4];
        	returnValue6 = arrRetValues[5];
      }
      bStepExecuted = 1;
    }
    if (stepID == 11)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
        	returnValue1 = arrRetValues[0];
        	returnValue2 = arrRetValues[1];
        	returnValue3 = arrRetValues[2];
        	returnValue4 = arrRetValues[3];
        	returnValue5 = arrRetValues[4];
        	returnValue6 = arrRetValues[5];
      }
      bStepExecuted = 1;
    }
    if (bStepExecuted == 1)
    {
      rc.AddAsLast(returnValue1);
      rc.AddAsLast(returnValue2);
      rc.AddAsLast(returnValue3);
      rc.AddAsLast(returnValue4);
      rc.AddAsLast(returnValue5);
      rc.AddAsLast(returnValue6);
      return;
    }
    else
    {
      _throwError(Translate("No Load Carrier Step defined for stepID"), stepID);
    }
  }

  function UnloadCarrier( device & ML_STAR, variable stepID, variable unloadCarrier, variable userResponseTime, variable & rc[] ) void {
    private variable returnValue1;
    private variable returnValue2;
    private variable returnValue3;
    private variable bStepExecuted;
    rc.SetSize( 0);
    rc.SetSize(0);
    bStepExecuted = 0;
    if (stepID == 10)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        	returnValue1 = arrRetValues[0];
        	returnValue2 = arrRetValues[1];
        	returnValue3 = arrRetValues[2];
      }
      bStepExecuted = 1;
    }
    if (stepID == 11)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        	returnValue1 = arrRetValues[0];
        	returnValue2 = arrRetValues[1];
        	returnValue3 = arrRetValues[2];
      }
      bStepExecuted = 1;
    }
    if (bStepExecuted == 1)
    {
      rc.AddAsLast(returnValue1);
      rc.AddAsLast(returnValue2);
      rc.AddAsLast(returnValue3);
      return;
    }
    else
    {
      _throwError(Translate("No Unload Carrier Step defined for stepID"), stepID);
    }
  }

  function Calibrate1536Plate( device & ML_STAR, variable stepID, variable calibrateCarrier, variable calibrateCarrierChannel, variable userResponseTime, variable & rc[] ) void {
    private variable returnValue1;
    private variable returnValue2;
    private variable returnValue3;
    private variable bStepExecuted;
    rc.SetSize( 0);
    rc.SetSize(0);
    bStepExecuted = 0;
    if (stepID == 10)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._81DA4251_3BA9_11d4_AE21_0004ACB1DCB2("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"); // Calibrate1536Plate
        	returnValue1 = arrRetValues[0];
        	returnValue2 = arrRetValues[1];
        	returnValue3 = arrRetValues[2];
      }
      bStepExecuted = 1;
    }
    if (stepID == 11)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._81DA4251_3BA9_11d4_AE21_0004ACB1DCB2("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"); // Calibrate1536Plate
        	returnValue1 = arrRetValues[0];
        	returnValue2 = arrRetValues[1];
        	returnValue3 = arrRetValues[2];
      }
      bStepExecuted = 1;
    }
    if (bStepExecuted == 1)
    {
      rc.AddAsLast(returnValue1);
      rc.AddAsLast(returnValue2);
      rc.AddAsLast(returnValue3);
      return;
    }
    else
    {
      _throwError(Translate("No Calibrate Carrier Step defined for stepID"), stepID);
    }
  }

  function WaitNeedleWash( device & ML_STAR, variable stepID, variable washStation, variable userResponseTime, variable & rc[] ) void {
    private variable returnValue1;
    private variable returnValue2;
    private variable returnValue3;
    private variable bStepExecuted;
    rc.SetSize( 0);
    rc.SetSize(0);
    bStepExecuted = 0;
    if (stepID == 10)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._BCAAD4F5_0BD2_4d9c_8243_70DD893496CB("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"); // WaitNeedleWashed
        	returnValue1 = arrRetValues[0];
        	returnValue2 = arrRetValues[1];
        	returnValue3 = arrRetValues[2];
      }
      bStepExecuted = 1;
    }
    if (stepID == 11)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._BCAAD4F5_0BD2_4d9c_8243_70DD893496CB("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"); // WaitNeedleWashed
        	returnValue1 = arrRetValues[0];
        	returnValue2 = arrRetValues[1];
        	returnValue3 = arrRetValues[2];
      }
      bStepExecuted = 1;
    }
    if (bStepExecuted == 1)
    {
      rc.AddAsLast(returnValue1);
      rc.AddAsLast(returnValue2);
      rc.AddAsLast(returnValue3);
      return;
    }
    else
    {
      _throwError(Translate("No 1000ul Channel Wait For Needle Wash Step defined for stepID"), stepID);
    }
  }

  function StartNeedleWash( device & ML_STAR, variable stepID, variable washStation, variable rinseTime1, variable soakTime1, variable flowRate1, variable rinseTime2, variable soakTime2, variable flowRate2, variable drainingTime, variable startWashLiquid, variable userResponseTime, variable & rc[] ) void {
    private variable returnValue1;
    private variable returnValue2;
    private variable returnValue3;
    private variable bStepExecuted;
    rc.SetSize( 0);
    rc.SetSize(0);
    bStepExecuted = 0;
    if (stepID == 10)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._C3B1B9A6_5B2F_4069_B9CB_68A675EC480D("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"); // StartNeedleWash
        	returnValue1 = arrRetValues[0];
        	returnValue2 = arrRetValues[1];
        	returnValue3 = arrRetValues[2];
      }
      bStepExecuted = 1;
    }
    if (stepID == 11)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._C3B1B9A6_5B2F_4069_B9CB_68A675EC480D("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"); // StartNeedleWash
        	returnValue1 = arrRetValues[0];
        	returnValue2 = arrRetValues[1];
        	returnValue3 = arrRetValues[2];
      }
      bStepExecuted = 1;
    }
    if (bStepExecuted == 1)
    {
      rc.AddAsLast(returnValue1);
      rc.AddAsLast(returnValue2);
      rc.AddAsLast(returnValue3);
      return;
    }
    else
    {
      _throwError(Translate("No 1000ul Channel Start Needle Wash Step defined for stepID"), stepID);
    }
  }

  function PreDispense( device & ML_STAR, variable stepID, sequence & dispenseSequence, variable dispenseSequenceCounting, variable dispenseChannelVariable, variable dispenseChannelUse, variable dispenseMode, variable & dispenseVolumes[], variable dispenseUserDefinedLiquidClass, variable dispenseCLLDSensitivity, variable dispenseSubmergeDepth, variable dispenseFluidHeight, variable dispenseLiquidFollowing, variable dispenseMixCycles, variable dispenseMixPosition, variable dispenseMixVolume, variable userResponseTime, variable & rc[] ) void {
    private variable returnValue1;
    private variable returnValue2;
    private variable returnValue3;
    private variable bStepExecuted;
    rc.SetSize(0);
    bStepExecuted = 0;
    if (stepID == 10)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        	returnValue1 = arrRetValues[0];
        	returnValue2 = arrRetValues[1];
        	returnValue3 = arrRetValues[2];
      }
      bStepExecuted = 1;
    }
    if (stepID == 11)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        	returnValue1 = arrRetValues[0];
        	returnValue2 = arrRetValues[1];
        	returnValue3 = arrRetValues[2];
      }
      bStepExecuted = 1;
    }
    if (bStepExecuted == 1)
    {
      rc.AddAsLast(returnValue1);
      rc.AddAsLast(returnValue2);
      rc.AddAsLast(returnValue3);
      return;
    }
    else
    {
      _throwError(Translate("No 1000ul Channel Dispense Step defined for pre-dispense with stepID"), stepID);
    }
  }

  function PostDispense( device & ML_STAR, variable stepID, sequence & dispenseSequence, variable dispenseSequenceCounting, variable dispenseChannelVariable, variable dispenseChannelUse, variable dispenseMode, variable & dispenseVolumes[], variable dispenseUserDefinedLiquidClass, variable dispenseCLLDSensitivity, variable dispenseSubmergeDepth, variable dispenseFluidHeight, variable dispenseLiquidFollowing, variable dispenseMixCycles, variable dispenseMixPosition, variable dispenseMixVolume, variable userResponseTime, variable & rc[] ) void {
    private variable returnValue1;
    private variable returnValue2;
    private variable returnValue3;
    private variable bStepExecuted;
    rc.SetSize(0);
    bStepExecuted = 0;
    if (stepID == 10)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        	returnValue1 = arrRetValues[0];
        	returnValue2 = arrRetValues[1];
        	returnValue3 = arrRetValues[2];
      }
      bStepExecuted = 1;
    }
    if (stepID == 11)
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        	returnValue1 = arrRetValues[0];
        	returnValue2 = arrRetValues[1];
        	returnValue3 = arrRetValues[2];
      }
      bStepExecuted = 1;
    }
    if (bStepExecuted == 1)
    {
      rc.AddAsLast(returnValue1);
      rc.AddAsLast(returnValue2);
      rc.AddAsLast(returnValue3);
      return;
    }
    else
    {
      _throwError(Translate("No 1000ul Channel Dispense Step defined for post-dispense with stepID"), stepID);
    }
  }
} // library namespace
