#pragma global
#include "HSLExtensions\\File.hsl"
#include "HSLStrLib.hsl"
#include "HSLUtilLib.hsl"
#include "HSLTrcLib.hsl"
#include "HSLFilLib.hsl"
#include "HSLExtensions\\Directory.hsl"
#include "Edit File Attributes\\EditFileAttributes.hs_"
#include "HSLExtensions\\Array.hsl"
#include "HSLUtilLib2.hsl"
#include "HSLLabwareStateLib.hsl"
#include "HSLMlStarStepReturnLib.hsl"
#include "HSLSeqLib.hsl"
#include "HSLMappingReport.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace TADM_EXPORT_CURVES {
  function ExportTADM_By_DestBC( variable i_str_ExportFilePath, variable i_bool_ByAspiration, variable i_bool_ByDispense ) void ;
  function ExportTADM_By_DestLabID( variable i_str_ExportFilePath, variable i_bool_ByAspiration, variable i_bool_ByDispense ) void ;
  function ExportTADM_By_TransferName( variable i_str_ExportFilePath, variable i_bool_ByAspiration, variable i_bool_ByDispense ) void ;
  private function RunTADMExport( variable i_str_TADM_File, variable i_str_TADM_ExportDestination ) variable ;
  function TransferReport( device & Instrument, variable i_str_ReportFilePath, variable i_str_AspReturnValue, variable i_str_DispReturnValue, variable i_str_LiquidClass, variable i_str_NameForTransfer ) void ;
  function TransferReport_MPH96( device & Instrument, variable i_str_ReportFilePath, variable i_str_AspReturnValue3, variable i_str_AspReturnValue4, variable i_str_DispReturnValue3, variable i_str_DispReturnValue4, variable i_str_LiquidClass, variable i_str_NameForTransfer ) void ;
  function TransferReport_MPH96_MoveBarcodes( device & Instrument, variable i_str_ReportFilePath, variable i_str_AspReturnValue3, variable i_str_AspReturnValue4, variable i_str_DispReturnValue3, variable i_str_DispReturnValue4, variable i_str_LiquidClass, variable i_str_NameForTransfer ) void ;
  function TransferReport_MoveBarcodes( device & Instrument, variable i_str_ReportFilePath, variable i_str_AspReturnValue, variable i_str_DispReturnValue, variable i_str_LiquidClass, variable i_str_NameForTransfer ) void ;
  private function _Asp_Error_Codes( variable i_int_ErrorCode, variable & o_str_ErrorDescriptions ) void ;
  private function _DeleteExportFiles(  ) void ;
  private function _Disp_Error_Codes( variable i_int_ErrorCode, variable & o_str_ErrorDescriptions ) void ;
  private function _ExportTADMCurve( variable i_str_TADM_CurveFile, variable i_str_TabName, variable & i_arr_CurveIDs[], variable i_bool_Aspiration, variable & io_int_CurveCount ) void ;
  private function _GetAllDetails( variable i_str_ExportFile, variable & o_arr_LiquidClass[], variable & o_arr_TransferVolume[] ) void ;
  private function _Get_TADM_FileName( variable & o_str_TADM_Name ) void ;
  private function _LookUp( variable & array[], variable item ) variable ;
  private function _Recovery_Codes( variable i_int_RecoveryUsed, variable & o_str_RecoveryUsed ) void ;
  private function _RemoveUnusedCharacters( variable & io_str_TabName ) void ;
  private function _RunMacro( variable i_str_MacroFilePath, variable i_str_SourceFilePath, variable i_str_ExportFilePath, variable i_str_LiquidClass, variable i_str_TabName, variable i_flt_Volume, variable i_int_StartingCurve, variable i_int_EndingCurve, variable i_int_CurveNumber, variable i_bool_Aspiration ) void ;
  function _InitLibrary() {
    EDITFILEATTRIBUTES::_InitLibrary();
  }
  function _ExitLibrary() {
    EDITFILEATTRIBUTES::_ExitLibrary();
  }

  private function _Get_TADM_FileName( variable & o_str_TADM_Name ) void {
    private variable str_MethodName;
    private variable str_UniqueRunID;
    private variable str_LogFolderPath;
    private variable bool_SimMode;
    o_str_TADM_Name = 0;
    bool_SimMode = Util::GetSimulationMode();
    str_LogFolderPath = FilGetLogFilesPath();
    o_str_TADM_Name = Translate("");
    str_UniqueRunID = Util::GetUniqueRunId();
    str_MethodName = TrcGetMethodFileName();
    str_MethodName = HSLExtensions::File::GetFileNameWithoutExtension(str_MethodName);
    o_str_TADM_Name = StrConcat8(str_MethodName, Translate("_"), str_UniqueRunID, Translate("_"), Translate("ML_STAR_tadm"), Translate(".mdb"), Translate(""), Translate(""));
    o_str_TADM_Name = StrConcat4(str_LogFolderPath, Translate("\\"), o_str_TADM_Name, Translate(""));
    if (bool_SimMode == 1)
    {
      if(0){
        o_str_TADM_Name = StrConcat4(str_LogFolderPath, Translate("\\"), Translate("Test_tadm"), Translate(".mdb"));
        o_str_TADM_Name = StrConcat4(str_LogFolderPath, Translate("\\"), Translate("LargeTADMTest"), Translate(".mdb"));
        o_str_TADM_Name = StrConcat4(str_LogFolderPath, Translate("\\"), Translate("ExcludeTest"), Translate(".mdb"));
      }
    }
  }

  private function RunTADMExport( variable i_str_TADM_File, variable i_str_TADM_ExportDestination ) variable {
    private variable str_ShellCommand;
    private variable str_ProgramPath;
    private variable int_ExitCode;
    private variable str_LibraryFolderPath;
    private variable bool_FileExists;
    private variable ret_Value;
    private variable str_TADM_Copy;
    private variable str_DirectoryPath;
    ret_Value = -1;
    StrReplace(i_str_TADM_File, Translate("\\\\"), Translate("\\"));
    StrReplace(i_str_TADM_ExportDestination, Translate("\\\\"), Translate("\\"));
    str_DirectoryPath = HSLExtensions::File::GetDirectoryName(i_str_TADM_File);
    if(0){
      str_TADM_Copy = StrConcat4(str_DirectoryPath, Translate("\\"), Translate("TADM_COPY"), Translate(".mdb"));
      StrReplace(str_TADM_Copy, Translate("\\\\"), Translate("\\"));
      HSLExtensions::File::Copy(i_str_TADM_File, str_TADM_Copy, 1);
    }
    bool_FileExists = HSLExtensions::File::Exists(i_str_TADM_File);
    HSLExtensions::Directory::Create(i_str_TADM_ExportDestination);
    Trace("");
    Trace("     ","Source TADM File:  ",i_str_TADM_File);
    //Trace("     ","TADM Copy File:  ",str_TADM_Copy);
    Trace("     ","TADM Export FIle:  ",i_str_TADM_ExportDestination);
    Trace("");
    if (bool_FileExists == 0)
    {
      MECC::TraceComment(Translate("========== Database doesn't exist!"));
      return (ret_Value);
    }
    str_LibraryFolderPath = FilGetLibraryPath();
    str_ProgramPath = StrConcat4(str_LibraryFolderPath, Translate("\\TADM Export Curves\\Resource Files\\TadmExport\\"), Translate("TadmCurvesExport"), Translate(".exe"));
    StrReplace(str_ProgramPath, Translate("\\\\"), Translate("\\"));
    str_ShellCommand = StrConcat12(str_ProgramPath, Translate(" /exportTo:csv"), Translate(" \""), i_str_TADM_File, Translate("\" \""), i_str_TADM_ExportDestination, Translate("\""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    if(0){
      Trace("Shell Command:  ",str_ShellCommand);
    }
    {
      event localDummyEvent1;
      if( 0 == Shell(str_ShellCommand, hslHide, hslSynchronous, localDummyEvent1, int_ExitCode) )
      {
            MECC::RaiseRuntimeErrorEx(-1238499072, MECC::IDS::stepNameShell, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    Trace("Exit Code:  ",int_ExitCode);
    ret_Value = int_ExitCode;
    if(0){
      HSLExtensions::File::Delete(str_TADM_Copy);
    }
    return (ret_Value);
  }

  private function _DeleteExportFiles(  ) void {
    private variable str_ExportFolder;
    private variable str_LibraryFolderPath;
    private variable str_CurrentFile;
    private variable i;
    private variable str_FileName;
    private variable int_FileCount;
    private variable arr_FilesInDirectory[];
    str_LibraryFolderPath = FilGetLibraryPath();
    str_ExportFolder = StrConcat4(str_LibraryFolderPath, Translate("\\TADM Export Curves\\Resource Files\\Export CSV\\"), Translate(""), Translate(""));
    arr_FilesInDirectory = HSLExtensions::Directory::GetFileNames(str_ExportFolder);
    int_FileCount = HSLExtensions::Directory::GetFileCount(str_ExportFolder);
    {
      for(i = 0; i < int_FileCount;)
      {
        i = i + 1;
        str_FileName=arr_FilesInDirectory.GetAt(i-1);
        str_CurrentFile = StrConcat4(str_ExportFolder, str_FileName, Translate(""), Translate(""));
        HSLExtensions::File::Delete(str_CurrentFile);
      }
    }
  }

  private function _RunMacro( variable i_str_MacroFilePath, variable i_str_SourceFilePath, variable i_str_ExportFilePath, variable i_str_LiquidClass, variable i_str_TabName, variable i_flt_Volume, variable i_int_StartingCurve, variable i_int_EndingCurve, variable i_int_CurveNumber, variable i_bool_Aspiration ) void {
    private variable str_CurveName;
    private variable str_TabName;
    private variable str_MacroFilePath;
    private variable str_ExportFilePath;
    private variable str_SourceDataFile;
    private variable str_Volume;
    private variable int_Check;
    str_Volume = StrConcat2(i_flt_Volume, Translate(""));
    str_Volume = StrTrimRight(str_Volume, Translate("0"));
    int_Check = StrRight(str_Volume, 1);
    if (int_Check == ".")
    {
      StrReplace(str_Volume, Translate("."), Translate(".0"));
    }
    str_CurveName = StrConcat4(i_str_LiquidClass, Translate(" "), str_Volume, Translate(" uL"));
    str_CurveName = StrConcat8(str_CurveName, Translate("\n"), i_int_StartingCurve, Translate("  -  "), i_int_EndingCurve, Translate(""), Translate(""), Translate(""));
    if (i_bool_Aspiration == 1)
    {
      str_CurveName = StrConcat4(str_CurveName, Translate("    "), Translate("Aspiration"), Translate(""));
    }
    else
    {
      str_CurveName = StrConcat4(str_CurveName, Translate("    "), Translate("Dispense"), Translate(""));
    }
    str_MacroFilePath = i_str_MacroFilePath;
    str_ExportFilePath = i_str_ExportFilePath;
    str_TabName = i_str_TabName;
    str_SourceDataFile = i_str_SourceFilePath;
    if(0){
      Trace("");
      Trace("     ","Curve Name:  ",str_CurveName);
      Trace("     ","Macro File Path:  ",str_MacroFilePath);
      Trace("     ","Export File Path:  ",str_ExportFilePath);
      Trace("     ","Source File Path:  ",str_SourceDataFile);
      Trace("     ","Tabe Name:  ",str_TabName);
      Trace("");
    }
    {
         object fso;
         object xlApp;
         object xlWorkbooks;
         object xlWorkbook;
         fso.CreateObject("Scripting.FileSystemObject");
            onerror goto Unexpected;
            xlApp.CreateObject("Excel.Application");
            //Open workbook
         xlWorkbooks = xlApp.Workbooks;
         xlWorkbook = xlWorkbooks.Open(str_MacroFilePath);
         xlApp.Run("ExportTADM2", str_ExportFilePath, str_SourceDataFile, str_CurveName, str_TabName, i_int_CurveNumber);
         xlWorkbook.Close;
         //xlApp.Quit;
         Unexpected:
            {
                 xlApp.ReleaseObject();
                 xlWorkbooks.ReleaseObject();
                 xlWorkbook.ReleaseObject();
                 xlApp.ReleaseObject();
            }
    }
  }

  private function _GetAllDetails( variable i_str_ExportFile, variable & o_arr_LiquidClass[], variable & o_arr_TransferVolume[] ) void {
    private variable str_SheetName;
    private variable str_FileStepType;
    private variable int_TadmMode;
    private variable int_Stepnumber;
    private variable str_Time;
    private variable str_LiquidClass;
    private variable int_ChannelNumber;
    private variable int_CurveID;
    private variable flt_Volume;
    private variable int_TadmError;
    private file CurveFileRead;
    private variable arr_UniqueStore[];
    private variable str_Concat;
    private variable bool_ValueFound;
    o_arr_LiquidClass.SetSize( 0);
    o_arr_TransferVolume.SetSize( 0);
    CurveFileRead.SetExtendedProperties( "HDR=NO");
    CurveFileRead.AddField(1, str_LiquidClass, hslString, 255);
    CurveFileRead.AddField(2, flt_Volume, hslFloat);
    CurveFileRead.AddField(3, str_FileStepType, hslString, 255);
    CurveFileRead.AddField(4, str_SheetName, hslString, 255);
    CurveFileRead.AddField(5, int_CurveID, hslInteger);
    CurveFileRead.AddField(6, int_ChannelNumber, hslInteger);
    CurveFileRead.AddField(7, str_Time, hslString, 255);
    CurveFileRead.AddField(8, int_Stepnumber, hslInteger);
    CurveFileRead.AddField(9, int_TadmMode, hslInteger);
    CurveFileRead.AddField(10, int_TadmError, hslInteger);
    CurveFileRead.SetDelimiter(hslCSVDelimited);
    if( 0 == CurveFileRead.Open(i_str_ExportFile, hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_ExportFile, "HxMetEdCompCmd");
    }
    CurveFileRead.Seek(1, hslFirst);
    o_arr_LiquidClass.SetSize(0);
    o_arr_TransferVolume.SetSize(0);
    arr_UniqueStore.SetSize(0);
    {
      while (
         (CurveFileRead.Eof() == 0)
      )
      {
        if( 0 == CurveFileRead.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        str_Concat = StrConcat4(str_LiquidClass, Translate("_"), flt_Volume, Translate(""));
        bool_ValueFound = HSLExtensions::Array::ContainsValue(arr_UniqueStore, str_Concat);
        if (bool_ValueFound == 0)
        {
          arr_UniqueStore.AddAsLast(str_Concat);
          o_arr_LiquidClass.AddAsLast(str_LiquidClass);
          o_arr_TransferVolume.AddAsLast(flt_Volume);
        }
      }
    }
    if( 0 != CurveFileRead.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    CurveFileRead.RemoveFields();
    if(0){
      Util2::Debug::TraceArray_3(Translate("Volume         Liquid Class                            Unique Store"), o_arr_TransferVolume, o_arr_LiquidClass, arr_UniqueStore);
    }
  }

  function TransferReport( device & Instrument, variable i_str_ReportFilePath, variable i_str_AspReturnValue, variable i_str_DispReturnValue, variable i_str_LiquidClass, variable i_str_NameForTransfer ) void {
    private variable xls_PosID_asp;
    private variable xls_BC_Rack_Asp;
    private variable xls_Recov_asp;
    private variable xls_BC_Cont_Asp;
    private variable xls_LabID_asp;
    private variable numberOfReturnPosAspirate;
    private variable xls_BC_Cont_Disp;
    private variable xls_BC_Rack_Disp;
    private variable xls_chan_use;
    private variable int_length;
    private variable xls_Status_asp;
    private variable xls_vol_disp;
    private variable lengthLabIDDisp;
    private variable xls_Recov_disp;
    private variable xls_LabID_disp;
    private variable numberOfReturnPosDispense;
    private variable loopCounter1;
    private variable xls_Status_disp;
    private variable xls_vol_asp;
    private variable xls_PosID_disp;
    private variable stringPos;
    private sequence seq_DispBCGet;
    private sequence seq_AspBCGet;
    private file writeReportFile;
    private variable str_TADM_Mode;
    private variable bool_FileExists;
    private variable ReadTADM_Error;
    private variable ReadTADM_StepGuid;
    private variable ReadTADM_TimeStamp;
    private variable ReadTADM_TadmMode;
    private variable ReadTADM_ChannelNumber;
    private variable ReadTADM_StepType;
    private variable ReadTADM_StepNumber;
    private variable int_EntryFound;
    private variable str_SQL_Count;
    private variable ReadTADM_LiquidClassName;
    private variable ReadTADM_Volume;
    private variable ReadTADM_CurveId;
    private variable ReadTADM_CheckSum;
    private variable str_SQL_Sort;
    private variable ReadTADM_CurveFlagged;
    private variable ReadTADM_ToleranceBandGuid;
    private file ReadTADM;
    private variable str_TADM_CurveID_Disp;
    private variable str_StepNum_Asp;
    private variable str_TADM_Time_Disp;
    private variable str_TADM_CurveID_Asp;
    private variable str_StepNum_Disp;
    private variable str_TADM_Time_Asp;
    private variable lengthLabIDAsp;
    private variable str_TADM_FilePath;
    private variable lengthVolDisp;
    private variable lengthVolAsp;
    private variable xls_int_Recov_disp;
    private variable xls_int_Recov_asp;
    private variable length;
    private variable lengthVolumeAsp;
    StrReplace(i_str_NameForTransfer, Translate(" "), Translate("_"));
    _Get_TADM_FileName(str_TADM_FilePath);
    writeReportFile.AddField("Transfer Name", i_str_NameForTransfer, hslString, 255);
    writeReportFile.AddField("Channel Used", xls_chan_use, hslString, 255);
    writeReportFile.AddField("Asp Rack BC", xls_BC_Rack_Asp, hslString, 255);
    writeReportFile.AddField("Asp Container BC", xls_BC_Cont_Asp, hslString, 255);
    writeReportFile.AddField("Asp LabID", xls_LabID_asp, hslString, 255);
    writeReportFile.AddField("Asp PosID", xls_PosID_asp, hslString, 255);
    writeReportFile.AddField("Asp Volume", xls_vol_asp, hslString, 255);
    writeReportFile.AddField("Asp Status", xls_Status_asp, hslString, 255);
    writeReportFile.AddField("Asp Recovery", xls_Recov_asp, hslString, 255);
    writeReportFile.AddField("Disp Rack BC", xls_BC_Rack_Disp, hslString, 255);
    writeReportFile.AddField("Disp Container BC", xls_BC_Cont_Disp, hslString, 255);
    writeReportFile.AddField("Disp LabID", xls_LabID_disp, hslString, 255);
    writeReportFile.AddField("Disp PosID", xls_PosID_disp, hslString, 255);
    writeReportFile.AddField("Disp Volume", xls_vol_disp, hslString, 255);
    writeReportFile.AddField("Disp Status", xls_Status_disp, hslString, 255);
    writeReportFile.AddField("Disp Recovery", xls_Recov_disp, hslString, 255);
    writeReportFile.AddField("Liquid Class", i_str_LiquidClass, hslString, 255);
    writeReportFile.AddField("Step Number Asp", str_StepNum_Asp, hslString, 255);
    writeReportFile.AddField("Step Number Disp", str_StepNum_Disp, hslString, 255);
    writeReportFile.AddField("TADM Curve ID Asp", str_TADM_CurveID_Asp, hslString, 255);
    writeReportFile.AddField("TADM Curve ID Disp", str_TADM_CurveID_Disp, hslString, 255);
    writeReportFile.AddField("TADM Time Stamp Asp", str_TADM_Time_Asp, hslString, 255);
    writeReportFile.AddField("TADM Time Stamp Disp", str_TADM_Time_Disp, hslString, 255);
    writeReportFile.AddField("TADM Mode", str_TADM_Mode, hslString, 255);
    if( 0 == writeReportFile.Open(i_str_ReportFilePath + " " + "Report", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_ReportFilePath, "HxMetEdCompCmd");
    }
    numberOfReturnPosAspirate = StepReturn::GetNumberOfPositions(i_str_AspReturnValue);
    numberOfReturnPosDispense = StepReturn::GetNumberOfPositions(i_str_DispReturnValue);
    {
      for(loopCounter1 = 0; loopCounter1 < numberOfReturnPosAspirate;)
      {
        loopCounter1 = loopCounter1 + 1;
        xls_chan_use = Translate("-----");
        xls_BC_Rack_Asp = Translate("-----");
        xls_BC_Cont_Asp = Translate("-----");
        xls_LabID_asp = Translate("-----");
        xls_PosID_asp = Translate("-----");
        xls_vol_asp = Translate("-----");
        xls_Status_asp = Translate("-----");
        xls_Recov_asp = Translate("-----");
        xls_BC_Rack_Disp = Translate("-----");
        xls_BC_Cont_Disp = Translate("-----");
        xls_LabID_disp = Translate("-----");
        xls_PosID_disp = Translate("-----");
        xls_vol_disp = Translate("-----");
        xls_Status_disp = Translate("-----");
        xls_Recov_disp = Translate("-----");
        str_TADM_CurveID_Asp = Translate("-----");
        str_TADM_CurveID_Disp = Translate("-----");
        str_TADM_Mode = Translate("-----");
        str_TADM_Time_Asp = Translate("-----");
        str_TADM_Time_Disp = Translate("-----");
        str_StepNum_Asp = Translate("-----");
        str_StepNum_Disp = Translate("-----");
        stringPos = StepReturn::GetPositionFromNum(loopCounter1, i_str_AspReturnValue);
        xls_LabID_asp = StepReturn::GetLabwareId(stringPos, i_str_AspReturnValue);
        xls_PosID_asp = StepReturn::GetPositionId(stringPos, i_str_AspReturnValue);
        xls_Status_asp = StepReturn::GetMainError(stringPos, i_str_AspReturnValue);
        xls_vol_asp = StepReturn::GetStepData(stringPos, i_str_AspReturnValue);
        xls_int_Recov_asp = StepReturn::GetRecoveryButton(stringPos, i_str_AspReturnValue);
        xls_chan_use = StepReturn::GetPosition(stringPos, i_str_AspReturnValue);
        lengthLabIDAsp = StrGetLength(xls_LabID_asp);
        lengthVolumeAsp = StrGetLength(xls_vol_asp);
        if (lengthLabIDAsp != 0)
        {
          if (lengthVolumeAsp != 0)
          {
            _Asp_Error_Codes(xls_Status_asp, xls_Status_asp);
            _Recovery_Codes(xls_int_Recov_asp, xls_Recov_asp);
            onerror goto errLabel_1 ;
            err.Clear();
            SeqRemoveAll(seq_AspBCGet);
            SeqAdd(seq_AspBCGet, xls_LabID_asp, xls_PosID_asp);
            seq_AspBCGet.SetCurrentPosition(1);
            xls_BC_Rack_Asp = HSLLabwState::GetLabwareBarcode(Instrument, seq_AspBCGet, 300);
            int_length = StrGetLength(xls_BC_Rack_Asp);
            if (int_length == 0)
            {
              xls_BC_Rack_Asp = Translate("-----");
            }
            errLabel_1 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              xls_BC_Rack_Asp = Translate("-----");
            }   /* end if from skip handler if no error */
            onerror goto errLabel_2 ;
            err.Clear();
            xls_BC_Cont_Asp = HSLLabwState::GetLabwareBarcode(Instrument, seq_AspBCGet, 400);
            int_length = StrGetLength(xls_BC_Cont_Asp);
            if (int_length == 0)
            {
              xls_BC_Cont_Asp = Translate("-----");
            }
            errLabel_2 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              xls_BC_Cont_Asp = Translate("-----");
            }   /* end if from skip handler if no error */
            if (xls_int_Recov_asp != 5)
            {
              lengthVolAsp = StrGetLength(xls_vol_asp);
              if (lengthVolAsp > 0)
              {
                bool_FileExists = HSLExtensions::File::Exists(str_TADM_FilePath);
                if (bool_FileExists == 1)
                {
                  str_SQL_Count = StrConcat8(Translate("SELECT COUNT(*) AS N FROM [TadmCurve] WHERE [LiquidClassName] = '"), i_str_LiquidClass, Translate("' AND [ChannelNumber] = "), xls_chan_use, Translate(" AND [Volume] = "), xls_vol_asp, Translate(" AND [StepType] = -533331728"), Translate(""));
                  ReadTADM.AddField("N", int_EntryFound, hslInteger);
                  if( 0 == ReadTADM.Open(str_TADM_FilePath + " " + "TadmCurve", hslRead, str_SQL_Count) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_TADM_FilePath, "HxMetEdCompCmd");
                  }
                  if( 0 == ReadTADM.ReadRecord() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  if( 0 != ReadTADM.Close() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  ReadTADM.RemoveFields();
                  if (int_EntryFound > 0)
                  {
                    if(0){
                      str_SQL_Sort = StrConcat8(Translate("SELECT * FROM [TadmCurve] WHERE [LiquidClassName] = '"), i_str_LiquidClass, Translate("' AND [ChannelNumber] = "), xls_chan_use, Translate(" AND [StepType] = -533331728"), Translate(" ORDER BY [CurveId] DESC"), Translate(""), Translate(""));
                    }
                    str_SQL_Sort = StrConcat8(Translate("SELECT * FROM [TadmCurve] WHERE [LiquidClassName] = '"), i_str_LiquidClass, Translate("' AND [ChannelNumber] = "), xls_chan_use, Translate(" AND [Volume] = "), xls_vol_asp, Translate(" AND [StepType] = -533331728"), Translate(" ORDER BY [CurveId] DESC"));
                    ReadTADM.AddField("CurveId", ReadTADM_CurveId, hslInteger);
                    ReadTADM.AddField("LiquidClassName", ReadTADM_LiquidClassName, hslString, 100);
                    ReadTADM.AddField("StepType", ReadTADM_StepType, hslInteger);
                    ReadTADM.AddField("Volume", ReadTADM_Volume, hslFloat);
                    ReadTADM.AddField("TimeStamp", ReadTADM_TimeStamp, hslString, 8);
                    ReadTADM.AddField("StepGuid", ReadTADM_StepGuid, hslString, 36);
                    ReadTADM.AddField("ToleranceBandGuid", ReadTADM_ToleranceBandGuid, hslString, 36);
                    ReadTADM.AddField("StepNumber", ReadTADM_StepNumber, hslInteger);
                    ReadTADM.AddField("Error", ReadTADM_Error, hslInteger);
                    ReadTADM.AddField("ChannelNumber", ReadTADM_ChannelNumber, hslInteger);
                    ReadTADM.AddField("TadmMode", ReadTADM_TadmMode, hslInteger);
                    ReadTADM.AddField("CurveFlagged", ReadTADM_CurveFlagged, hslInteger);
                    ReadTADM.AddField("CheckSum", ReadTADM_CheckSum, hslInteger);
                    if( 0 == ReadTADM.Open(str_TADM_FilePath + " " + "TadmCurve", hslRead, str_SQL_Sort) )
                    {
                          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_TADM_FilePath, "HxMetEdCompCmd");
                    }
                    if( 0 == ReadTADM.ReadRecord() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    if( 0 != ReadTADM.Close() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    ReadTADM.RemoveFields();
                    str_TADM_CurveID_Asp = StrConcat2(ReadTADM_CurveId, Translate(""));
                    str_TADM_Mode = StrConcat2(ReadTADM_TadmMode, Translate(""));
                    str_TADM_Time_Asp = StrConcat2(ReadTADM_TimeStamp, Translate(""));
                    str_StepNum_Asp = StrConcat2(ReadTADM_StepNumber, Translate(""));
                  }
                }
              }
              else
              {
                xls_vol_asp = Translate("-----");
              }
            }
            stringPos = StepReturn::GetPositionFromNum(loopCounter1, i_str_DispReturnValue);
            xls_LabID_disp = StepReturn::GetLabwareId(stringPos, i_str_DispReturnValue);
            xls_PosID_disp = StepReturn::GetPositionId(stringPos, i_str_DispReturnValue);
            xls_Status_disp = StepReturn::GetMainError(stringPos, i_str_DispReturnValue);
            xls_vol_disp = StepReturn::GetStepData(stringPos, i_str_DispReturnValue);
            xls_int_Recov_disp = StepReturn::GetRecoveryButton(stringPos, i_str_DispReturnValue);
            length = StrGetLength(xls_LabID_disp);
            if (length == 0)
            {
              xls_LabID_disp = Translate("-----");
            }
            length = StrGetLength(xls_PosID_disp);
            if (length == 0)
            {
              xls_PosID_disp = Translate("-----");
            }
            length = StrGetLength(xls_vol_disp);
            if (length == 0)
            {
              xls_vol_disp = Translate("-----");
            }
            _Disp_Error_Codes(xls_Status_disp, xls_Status_disp);
            _Recovery_Codes(xls_int_Recov_disp, xls_Recov_disp);
            lengthLabIDDisp = StrGetLength(xls_LabID_disp);
            if (xls_LabID_disp != "-----")
            {
              if (lengthLabIDDisp != 0)
              {
                SeqRemoveAll(seq_DispBCGet);
                SeqAdd(seq_DispBCGet, xls_LabID_disp, xls_PosID_disp);
                seq_DispBCGet.SetCurrentPosition(1);
                onerror goto errLabel_3 ;
                err.Clear();
                xls_BC_Rack_Disp = HSLLabwState::GetLabwareBarcode(Instrument, seq_DispBCGet, 300);
                int_length = StrGetLength(xls_BC_Rack_Disp);
                if (int_length == 0)
                {
                  xls_BC_Rack_Disp = Translate("-----");
                }
                errLabel_3 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  xls_BC_Rack_Disp = Translate("-----");
                }   /* end if from skip handler if no error */
                onerror goto errLabel_4 ;
                err.Clear();
                xls_BC_Cont_Disp = HSLLabwState::GetLabwareBarcode(Instrument, seq_DispBCGet, 400);
                int_length = StrGetLength(xls_BC_Cont_Disp);
                if (int_length == 0)
                {
                  xls_BC_Cont_Disp = Translate("-----");
                }
                errLabel_4 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  xls_BC_Cont_Disp = Translate("-----");
                }   /* end if from skip handler if no error */
                if (xls_int_Recov_disp != 5)
                {
                  lengthVolDisp = StrGetLength(xls_vol_disp);
                  if (lengthVolDisp > 0)
                  {
                    bool_FileExists = HSLExtensions::File::Exists(str_TADM_FilePath);
                    if (bool_FileExists == 1)
                    {
                      str_SQL_Count = StrConcat8(Translate("SELECT COUNT(*) AS N FROM [TadmCurve] WHERE [LiquidClassName] = '"), i_str_LiquidClass, Translate("' AND [ChannelNumber] = "), xls_chan_use, Translate(" AND [Volume] = "), xls_vol_disp, Translate(" AND [StepType] = -533331727"), Translate(""));
                      ReadTADM.AddField("N", int_EntryFound, hslInteger);
                      if( 0 == ReadTADM.Open(str_TADM_FilePath + " " + "TadmCurve", hslRead, str_SQL_Count) )
                      {
                            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_TADM_FilePath, "HxMetEdCompCmd");
                      }
                      if( 0 == ReadTADM.ReadRecord() )
                      {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      if( 0 != ReadTADM.Close() )
                      {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      ReadTADM.RemoveFields();
                      if (int_EntryFound > 0)
                      {
                        if(0){
                        str_SQL_Sort = StrConcat8(Translate("SELECT * FROM [TadmCurve] WHERE [LiquidClassName] = '"), i_str_LiquidClass, Translate("' AND [ChannelNumber] = "), xls_chan_use, Translate(" AND [StepType] = -533331727"), Translate(" ORDER BY [CurveId] DESC"), Translate(""), Translate(""));
                        }
                        str_SQL_Sort = StrConcat8(Translate("SELECT * FROM [TadmCurve] WHERE [LiquidClassName] = '"), i_str_LiquidClass, Translate("' AND [ChannelNumber] = "), xls_chan_use, Translate(" AND [Volume] = "), xls_vol_disp, Translate(" AND [StepType] = -533331727"), Translate(" ORDER BY [CurveId] DESC"));
                        ReadTADM.AddField("CurveId", ReadTADM_CurveId, hslInteger);
                        ReadTADM.AddField("LiquidClassName", ReadTADM_LiquidClassName, hslString, 100);
                        ReadTADM.AddField("StepType", ReadTADM_StepType, hslInteger);
                        ReadTADM.AddField("Volume", ReadTADM_Volume, hslFloat);
                        ReadTADM.AddField("TimeStamp", ReadTADM_TimeStamp, hslString, 8);
                        ReadTADM.AddField("StepGuid", ReadTADM_StepGuid, hslString, 36);
                        ReadTADM.AddField("ToleranceBandGuid", ReadTADM_ToleranceBandGuid, hslString, 36);
                        ReadTADM.AddField("StepNumber", ReadTADM_StepNumber, hslInteger);
                        ReadTADM.AddField("Error", ReadTADM_Error, hslInteger);
                        ReadTADM.AddField("ChannelNumber", ReadTADM_ChannelNumber, hslInteger);
                        ReadTADM.AddField("TadmMode", ReadTADM_TadmMode, hslInteger);
                        ReadTADM.AddField("CurveFlagged", ReadTADM_CurveFlagged, hslInteger);
                        ReadTADM.AddField("CheckSum", ReadTADM_CheckSum, hslInteger);
                        if( 0 == ReadTADM.Open(str_TADM_FilePath + " " + "TadmCurve", hslRead, str_SQL_Sort) )
                        {
                            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_TADM_FilePath, "HxMetEdCompCmd");
                        }
                        if( 0 == ReadTADM.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if( 0 != ReadTADM.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        ReadTADM.RemoveFields();
                        str_TADM_CurveID_Disp = StrConcat2(ReadTADM_CurveId, Translate(""));
                        str_TADM_Mode = StrConcat2(ReadTADM_TadmMode, Translate(""));
                        str_TADM_Time_Disp = StrConcat2(ReadTADM_TimeStamp, Translate(""));
                        str_StepNum_Disp = StrConcat2(ReadTADM_StepNumber, Translate(""));
                      }
                    }
                  }
                  else
                  {
                    xls_vol_disp = Translate("-----");
                  }
                }
              }
              if( 0 == writeReportFile.WriteRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
          }
        }
      }
    }
    if( 0 != writeReportFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    writeReportFile.RemoveFields();
  }

  private function _Asp_Error_Codes( variable i_int_ErrorCode, variable & o_str_ErrorDescriptions ) void {
    o_str_ErrorDescriptions = 0;
    o_str_ErrorDescriptions = Translate("");
    if (i_int_ErrorCode == 0)
    {
      o_str_ErrorDescriptions = Translate("No Error");
      return;
    }
    if (i_int_ErrorCode == 1)
    {
      o_str_ErrorDescriptions = Translate("Syntax Error");
      return;
    }
    if (i_int_ErrorCode == 2)
    {
      o_str_ErrorDescriptions = Translate("Hardware Error");
      return;
    }
    if (i_int_ErrorCode == 3)
    {
      o_str_ErrorDescriptions = Translate("Not Executed Error");
      return;
    }
    if (i_int_ErrorCode == 4)
    {
      o_str_ErrorDescriptions = Translate("Clot Error");
      return;
    }
    if (i_int_ErrorCode == 5)
    {
      o_str_ErrorDescriptions = Translate("Barcode Error");
      return;
    }
    if (i_int_ErrorCode == 6)
    {
      o_str_ErrorDescriptions = Translate("Insufficient Liquid Error");
      return;
    }
    if (i_int_ErrorCode == 7)
    {
      o_str_ErrorDescriptions = Translate("Tip Present Error");
      return;
    }
    if (i_int_ErrorCode == 8)
    {
      o_str_ErrorDescriptions = Translate("No Tip Error");
      return;
    }
    if (i_int_ErrorCode == 9)
    {
      o_str_ErrorDescriptions = Translate("No Carrier Error");
      return;
    }
    if (i_int_ErrorCode == 10)
    {
      o_str_ErrorDescriptions = Translate("Execution Error");
      return;
    }
    if (i_int_ErrorCode == 11)
    {
      o_str_ErrorDescriptions = Translate("Pressure LLD Error");
      return;
    }
    if (i_int_ErrorCode == 12)
    {
      o_str_ErrorDescriptions = Translate("Calibrate Error");
      return;
    }
    if (i_int_ErrorCode == 13)
    {
      o_str_ErrorDescriptions = Translate("Unload Error");
      return;
    }
    if (i_int_ErrorCode == 14)
    {
      o_str_ErrorDescriptions = Translate("Pressure LLD Error");
      return;
    }
    if (i_int_ErrorCode == 15)
    {
      o_str_ErrorDescriptions = Translate("Parameter Error");
      return;
    }
    if (i_int_ErrorCode == 16)
    {
      o_str_ErrorDescriptions = Translate("Cover Open Error");
      return;
    }
    if (i_int_ErrorCode == 17)
    {
      o_str_ErrorDescriptions = Translate("Improper Aspiration Error");
      return;
    }
    if (i_int_ErrorCode == 18)
    {
      o_str_ErrorDescriptions = Translate("Wash Liquid Error");
      return;
    }
    if (i_int_ErrorCode == 19)
    {
      o_str_ErrorDescriptions = Translate("Temperature Error");
      return;
    }
    if (i_int_ErrorCode == 20)
    {
      o_str_ErrorDescriptions = Translate("TADM overshot");
      return;
    }
    if (i_int_ErrorCode == 21)
    {
      o_str_ErrorDescriptions = Translate("Labware Error");
      return;
    }
    if (i_int_ErrorCode == 22)
    {
      o_str_ErrorDescriptions = Translate("Labware Gripped Error");
      return;
    }
    if (i_int_ErrorCode == 23)
    {
      o_str_ErrorDescriptions = Translate("Labware Lost Error");
      return;
    }
    if (i_int_ErrorCode == 24)
    {
      o_str_ErrorDescriptions = Translate("Illegal target plate position");
      return;
    }
    if (i_int_ErrorCode == 25)
    {
      o_str_ErrorDescriptions = Translate("Illegal Intervention Error");
      return;
    }
    if (i_int_ErrorCode == 26)
    {
      o_str_ErrorDescriptions = Translate("TADM undershot");
      return;
    }
    if (i_int_ErrorCode == 27)
    {
      o_str_ErrorDescriptions = Translate("Position Error");
      return;
    }
    if (i_int_ErrorCode == 28)
    {
      o_str_ErrorDescriptions = Translate("Unexpected cLLD Error");
      return;
    }
    if (i_int_ErrorCode == 29)
    {
      o_str_ErrorDescriptions = Translate("Area already occupied");
      return;
    }
    if (i_int_ErrorCode == 30)
    {
      o_str_ErrorDescriptions = Translate("Imposible to occupy Area");
      return;
    }
    if (i_int_ErrorCode == 31)
    {
      o_str_ErrorDescriptions = Translate("Anti drop control error");
      return;
    }
    if (i_int_ErrorCode == 99)
    {
      o_str_ErrorDescriptions = Translate("Slave Error");
      return;
    }
    if (i_int_ErrorCode == 100)
    {
      o_str_ErrorDescriptions = Translate("Wrong Carrier Error");
      return;
    }
    if (i_int_ErrorCode == 101)
    {
      o_str_ErrorDescriptions = Translate("No Carrier Barcode Error");
      return;
    }
    if (i_int_ErrorCode == 102)
    {
      o_str_ErrorDescriptions = Translate("Liquid Level Error");
      return;
    }
    if (i_int_ErrorCode == 103)
    {
      o_str_ErrorDescriptions = Translate("Not Detected Error");
      return;
    }
    if (i_int_ErrorCode == 104)
    {
      o_str_ErrorDescriptions = Translate("Not Aspirated Error");
      return;
    }
    if (i_int_ErrorCode == 105)
    {
      o_str_ErrorDescriptions = Translate("Improper Dispensation Error");
      return;
    }
    if (i_int_ErrorCode == 106)
    {
      o_str_ErrorDescriptions = Translate("No Labware Error");
      return;
    }
    if (i_int_ErrorCode == 107)
    {
      o_str_ErrorDescriptions = Translate("Unexpected Labware Error");
      return;
    }
    if (i_int_ErrorCode == 108)
    {
      o_str_ErrorDescriptions = Translate("Wrong Labware Error");
      return;
    }
    if (i_int_ErrorCode == 109)
    {
      o_str_ErrorDescriptions = Translate("Barcode Mask Error");
      return;
    }
    if (i_int_ErrorCode == 110)
    {
      o_str_ErrorDescriptions = Translate("Barcode Not Unique Error");
      return;
    }
    if (i_int_ErrorCode == 111)
    {
      o_str_ErrorDescriptions = Translate("Barcode Already Used Error");
      return;
    }
    if (i_int_ErrorCode == 112)
    {
      o_str_ErrorDescriptions = Translate("Kit Lot Expired Error");
      return;
    }
    if (i_int_ErrorCode == 113)
    {
      o_str_ErrorDescriptions = Translate("Delimiter Error");
      return;
    }
  }

  private function _Disp_Error_Codes( variable i_int_ErrorCode, variable & o_str_ErrorDescriptions ) void {
    o_str_ErrorDescriptions = 0;
    o_str_ErrorDescriptions = Translate("");
    if (i_int_ErrorCode == 0)
    {
      o_str_ErrorDescriptions = Translate("No Error");
      return;
    }
    if (i_int_ErrorCode == 1)
    {
      o_str_ErrorDescriptions = Translate("Syntax Error");
      return;
    }
    if (i_int_ErrorCode == 2)
    {
      o_str_ErrorDescriptions = Translate("Hardware Error");
      return;
    }
    if (i_int_ErrorCode == 3)
    {
      o_str_ErrorDescriptions = Translate("Not Executed Error");
      return;
    }
    if (i_int_ErrorCode == 4)
    {
      o_str_ErrorDescriptions = Translate("Clot Error");
      return;
    }
    if (i_int_ErrorCode == 5)
    {
      o_str_ErrorDescriptions = Translate("Barcode Error");
      return;
    }
    if (i_int_ErrorCode == 6)
    {
      o_str_ErrorDescriptions = Translate("Insufficient Liquid Error");
      return;
    }
    if (i_int_ErrorCode == 7)
    {
      o_str_ErrorDescriptions = Translate("Tip Present Error");
      return;
    }
    if (i_int_ErrorCode == 8)
    {
      o_str_ErrorDescriptions = Translate("No Tip Error");
      return;
    }
    if (i_int_ErrorCode == 9)
    {
      o_str_ErrorDescriptions = Translate("No Carrier Error");
      return;
    }
    if (i_int_ErrorCode == 10)
    {
      o_str_ErrorDescriptions = Translate("Execution Error");
      return;
    }
    if (i_int_ErrorCode == 11)
    {
      o_str_ErrorDescriptions = Translate("Pressure LLD Error");
      return;
    }
    if (i_int_ErrorCode == 12)
    {
      o_str_ErrorDescriptions = Translate("Calibrate Error");
      return;
    }
    if (i_int_ErrorCode == 13)
    {
      o_str_ErrorDescriptions = Translate("Unload Error");
      return;
    }
    if (i_int_ErrorCode == 14)
    {
      o_str_ErrorDescriptions = Translate("Pressure LLD Error");
      return;
    }
    if (i_int_ErrorCode == 15)
    {
      o_str_ErrorDescriptions = Translate("Parameter Error");
      return;
    }
    if (i_int_ErrorCode == 16)
    {
      o_str_ErrorDescriptions = Translate("Cover Open Error");
      return;
    }
    if (i_int_ErrorCode == 17)
    {
      o_str_ErrorDescriptions = Translate("Improper Dispense Error");
      return;
    }
    if (i_int_ErrorCode == 18)
    {
      o_str_ErrorDescriptions = Translate("Wash Liquid Error");
      return;
    }
    if (i_int_ErrorCode == 19)
    {
      o_str_ErrorDescriptions = Translate("Temperature Error");
      return;
    }
    if (i_int_ErrorCode == 20)
    {
      o_str_ErrorDescriptions = Translate("TADM overshot");
      return;
    }
    if (i_int_ErrorCode == 21)
    {
      o_str_ErrorDescriptions = Translate("Labware Error");
      return;
    }
    if (i_int_ErrorCode == 22)
    {
      o_str_ErrorDescriptions = Translate("Labware Gripped Error");
      return;
    }
    if (i_int_ErrorCode == 23)
    {
      o_str_ErrorDescriptions = Translate("Labware Lost Error");
      return;
    }
    if (i_int_ErrorCode == 24)
    {
      o_str_ErrorDescriptions = Translate("Illegal target plate position");
      return;
    }
    if (i_int_ErrorCode == 25)
    {
      o_str_ErrorDescriptions = Translate("Illegal Intervention Error");
      return;
    }
    if (i_int_ErrorCode == 26)
    {
      o_str_ErrorDescriptions = Translate("TADM undershot");
      return;
    }
    if (i_int_ErrorCode == 27)
    {
      o_str_ErrorDescriptions = Translate("Position Error");
      return;
    }
    if (i_int_ErrorCode == 28)
    {
      o_str_ErrorDescriptions = Translate("Unexpected cLLD Error");
      return;
    }
    if (i_int_ErrorCode == 29)
    {
      o_str_ErrorDescriptions = Translate("Area already occupied");
      return;
    }
    if (i_int_ErrorCode == 30)
    {
      o_str_ErrorDescriptions = Translate("Imposible to occupy Area");
      return;
    }
    if (i_int_ErrorCode == 31)
    {
      o_str_ErrorDescriptions = Translate("Anti drop control error");
      return;
    }
    if (i_int_ErrorCode == 99)
    {
      o_str_ErrorDescriptions = Translate("Slave Error");
      return;
    }
    if (i_int_ErrorCode == 100)
    {
      o_str_ErrorDescriptions = Translate("Wrong Carrier Error");
      return;
    }
    if (i_int_ErrorCode == 101)
    {
      o_str_ErrorDescriptions = Translate("No Carrier Barcode Error");
      return;
    }
    if (i_int_ErrorCode == 102)
    {
      o_str_ErrorDescriptions = Translate("Liquid Level Error");
      return;
    }
    if (i_int_ErrorCode == 103)
    {
      o_str_ErrorDescriptions = Translate("Not Detected Error");
      return;
    }
    if (i_int_ErrorCode == 104)
    {
      o_str_ErrorDescriptions = Translate("Not Aspirated Error");
      return;
    }
    if (i_int_ErrorCode == 105)
    {
      o_str_ErrorDescriptions = Translate("Improper Dispensation Error");
      return;
    }
    if (i_int_ErrorCode == 106)
    {
      o_str_ErrorDescriptions = Translate("No Labware Error");
      return;
    }
    if (i_int_ErrorCode == 107)
    {
      o_str_ErrorDescriptions = Translate("Unexpected Labware Error");
      return;
    }
    if (i_int_ErrorCode == 108)
    {
      o_str_ErrorDescriptions = Translate("Wrong Labware Error");
      return;
    }
    if (i_int_ErrorCode == 109)
    {
      o_str_ErrorDescriptions = Translate("Barcode Mask Error");
      return;
    }
    if (i_int_ErrorCode == 110)
    {
      o_str_ErrorDescriptions = Translate("Barcode Not Unique Error");
      return;
    }
    if (i_int_ErrorCode == 111)
    {
      o_str_ErrorDescriptions = Translate("Barcode Already Used Error");
      return;
    }
    if (i_int_ErrorCode == 112)
    {
      o_str_ErrorDescriptions = Translate("Kit Lot Expired Error");
      return;
    }
    if (i_int_ErrorCode == 113)
    {
      o_str_ErrorDescriptions = Translate("Delimiter Error");
      return;
    }
  }

  private function _Recovery_Codes( variable i_int_RecoveryUsed, variable & o_str_RecoveryUsed ) void {
    o_str_RecoveryUsed = 0;
    if (i_int_RecoveryUsed == 0)
    {
      o_str_RecoveryUsed = Translate("None");
      return;
    }
    if (i_int_RecoveryUsed == 1)
    {
      o_str_RecoveryUsed = Translate("Abort");
      return;
    }
    if (i_int_RecoveryUsed == 2)
    {
      o_str_RecoveryUsed = Translate("Cancel");
      return;
    }
    if (i_int_RecoveryUsed == 3)
    {
      o_str_RecoveryUsed = Translate("Initialize");
      return;
    }
    if (i_int_RecoveryUsed == 4)
    {
      o_str_RecoveryUsed = Translate("Repeat");
      return;
    }
    if (i_int_RecoveryUsed == 5)
    {
      o_str_RecoveryUsed = Translate("Exclude");
      return;
    }
    if (i_int_RecoveryUsed == 6)
    {
      o_str_RecoveryUsed = Translate("Waste");
      return;
    }
    if (i_int_RecoveryUsed == 7)
    {
      o_str_RecoveryUsed = Translate("Air");
      return;
    }
    if (i_int_RecoveryUsed == 8)
    {
      o_str_RecoveryUsed = Translate("Bottom");
      return;
    }
    if (i_int_RecoveryUsed == 9)
    {
      o_str_RecoveryUsed = Translate("Continue");
      return;
    }
    if (i_int_RecoveryUsed == 10)
    {
      o_str_RecoveryUsed = Translate("Barcode");
      return;
    }
    if (i_int_RecoveryUsed == 11)
    {
      o_str_RecoveryUsed = Translate("Next");
      return;
    }
    if (i_int_RecoveryUsed == 12)
    {
      o_str_RecoveryUsed = Translate("Available");
      return;
    }
    if (i_int_RecoveryUsed == 13)
    {
      o_str_RecoveryUsed = Translate("Refill");
      return;
    }
  }

  function ExportTADM_By_TransferName( variable i_str_ExportFilePath, variable i_bool_ByAspiration, variable i_bool_ByDispense ) void {
    private variable xls_PosID_asp;
    private variable xls_BC_Rack_Asp;
    private variable xls_Recov_asp;
    private variable xls_BC_Cont_Asp;
    private variable str_TADM_CurveID_Disp;
    private variable xls_BC_Cont_Disp;
    private variable xls_BC_Rack_Disp;
    private variable xls_LabID_asp;
    private variable str_TADM_Mode;
    private variable str_TADM_Time_Disp;
    private variable str_TADM_CurveID_Asp;
    private variable str_StepNum_Asp;
    private variable xls_chan_use;
    private variable str_TADM_Time_Asp;
    private variable str_StepNum_Disp;
    private variable xls_Status_asp;
    private variable xls_vol_disp;
    private variable str_SQL_Count;
    private variable xls_Recov_disp;
    private variable bool_FileExists;
    private variable xls_LabID_disp;
    private variable xls_TransferName;
    private variable str_SQL_Filter;
    private variable int_Count;
    private variable xls_Status_disp;
    private variable xls_vol_asp;
    private variable xls_PosID_disp;
    private file readReportFile;
    private variable arr_UniqueTransferName[];
    private variable i;
    private variable int_TotalTransfers;
    private variable str_CurrentTransferName;
    private variable str_LiquidClassVolume;
    private variable str_LiquidClass;
    private variable flt_AspVolume;
    private file getLiquidClass;
    private variable arr_Volume[];
    private variable arr_LiquidClass[];
    private variable arr_UniqueLiquidClassVolume[];
    private variable return_Value;
    private variable str_LibraryFolderPath;
    private variable str_ExportFolder;
    private variable int_TotalLiquidClasses;
    private variable a;
    private variable arr_CurveIDs[];
    private variable int_CurveCount;
    private variable str_TADM_File;
    private variable int_TADM_CurveID_Asp;
    private variable int_Check;
    private variable xls_LiquidClass;
    private variable str_AspVolume;
    private variable str_DispVolume;
    private variable flt_DispVolume;
    private variable int_TADM_CurveID_Disp;
    private variable int_Index;
    bool_FileExists = HSLExtensions::File::Exists(i_str_ExportFilePath);
    if (bool_FileExists == 0)
    {
      Trace("----------- ",i_str_ExportFilePath," was not found!");
      return;
    }
    str_SQL_Count = StrConcat4(Translate("SELECT COUNT(*) AS N FROM [Report] WHERE [TADM Mode] <> '-----'"), Translate(""), Translate(""), Translate(""));
    readReportFile.AddField("N", int_Count, hslInteger);
    if( 0 == readReportFile.Open(i_str_ExportFilePath + " " + "Report", hslRead, str_SQL_Count) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_ExportFilePath, "HxMetEdCompCmd");
    }
    if( 0 == readReportFile.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != readReportFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    readReportFile.RemoveFields();
    if (int_Count == 0)
    {
      MECC::TraceComment(Translate("------------------- No TADM Data found!"));
      return;
    }
    str_SQL_Filter = StrConcat4(Translate("SELECT [Transfer Name] FROM [Report] WHERE [TADM Mode] <> '-----'"), Translate(""), Translate(""), Translate(""));
    readReportFile.AddField("Transfer Name", xls_TransferName, hslString, 255);
    if( 0 == readReportFile.Open(i_str_ExportFilePath + " " + "Report", hslRead, str_SQL_Filter) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_ExportFilePath, "HxMetEdCompCmd");
    }
    arr_UniqueTransferName.SetSize(0);
    Trace("");
    {
      while (
         (readReportFile.Eof() == 0)
      )
      {
        if( 0 == readReportFile.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        int_Index = _LookUp(arr_UniqueTransferName, xls_TransferName);
        if (int_Index == 0)
        {
          arr_UniqueTransferName.AddAsLast(xls_TransferName);
          Trace("Transfer Name:  ",xls_TransferName);
        }
      }
    }
    if( 0 != readReportFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    readReportFile.RemoveFields();
    Trace("");
    Trace("     ","Add Aspiration Curves:  ",i_bool_ByAspiration);
    Trace("     ","Add Dispense Cuves:  ",i_bool_ByDispense);
    Trace("");
    _Get_TADM_FileName(str_TADM_File);
    _DeleteExportFiles();
    str_LibraryFolderPath = FilGetLibraryPath();
    str_ExportFolder = StrConcat4(str_LibraryFolderPath, Translate("\\TADM Export Curves\\Resource Files\\Export CSV"), Translate(""), Translate(""));
    return_Value = RunTADMExport(str_TADM_File, str_ExportFolder);
    Trace("Return Value:  ",return_Value);
    if (return_Value != 0)
    {
      MECC::TraceComment(Translate("\nTHERE WAS AN ISSUE EXPORTING THE TADM DATA\n"));
      return;
    }
    int_TotalTransfers=arr_UniqueTransferName.GetSize();
    {
      for(i = 0; i < int_TotalTransfers;)
      {
        i = i + 1;
        str_CurrentTransferName=arr_UniqueTransferName.GetAt(i-1);
        int_CurveCount = 1;
        if (i_bool_ByAspiration == 1)
        {
          str_SQL_Count = StrConcat4(Translate("SELECT [Liquid Class], [Asp Volume], COUNT(*) AS N FROM [Report] WHERE [TADM Mode] <> '-----'"), Translate(" AND [Transfer Name] = '"), str_CurrentTransferName, Translate("' GROUP BY [Liquid Class], [Asp Volume] ORDER BY [Asp Volume] ASC"));
          if(0){
            str_SQL_Count = StrConcat4(Translate("SELECT [Liquid Class], [Asp Volume], COUNT(*) AS N FROM [Report] WHERE [TADM Mode] <> '-----'"), Translate(" GROUP BY [Liquid Class], [Asp Volume]"), Translate(""), Translate(""));
          }
          getLiquidClass.AddField("Liquid Class", str_LiquidClass, hslString, 255);
          getLiquidClass.AddField("Asp Volume", flt_AspVolume, hslFloat);
          getLiquidClass.AddField("N", int_Count, hslInteger);
          if( 0 == getLiquidClass.Open(i_str_ExportFilePath + " " + "Report", hslAppend, str_SQL_Count) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_ExportFilePath, "HxMetEdCompCmd");
          }
          arr_UniqueLiquidClassVolume.SetSize(0);
          arr_LiquidClass.SetSize(0);
          arr_Volume.SetSize(0);
          {
            while (
               (getLiquidClass.Eof() == 0)
            )
            {
              if( 0 == getLiquidClass.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              str_LiquidClassVolume = StrConcat4(str_LiquidClass, Translate("_"), flt_AspVolume, Translate(""));
              if(0){
                Trace("Liquid class volume:  ",str_LiquidClassVolume);
              }
              arr_UniqueLiquidClassVolume.AddAsLast(str_LiquidClassVolume);
              arr_LiquidClass.AddAsLast(str_LiquidClass);
              arr_Volume.AddAsLast(flt_AspVolume);
            }
          }
          if( 0 != getLiquidClass.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          getLiquidClass.RemoveFields();
          int_TotalLiquidClasses=arr_UniqueLiquidClassVolume.GetSize();
          {
            for(a = 0; a < int_TotalLiquidClasses;)
            {
              a = a + 1;
              str_LiquidClass=arr_LiquidClass.GetAt(a-1);
              flt_AspVolume=arr_Volume.GetAt(a-1);
              str_AspVolume = StrConcat2(flt_AspVolume, Translate(""));
              str_AspVolume = StrTrimRight(str_AspVolume, Translate("0"));
              int_Check = StrRight(str_AspVolume, 1);
              if (int_Check == ".")
              {
                StrReplace(str_AspVolume, Translate("."), Translate(".0"));
              }
              str_SQL_Filter = StrConcat12(Translate("SELECT * FROM [Report$]  WHERE [Transfer Name] = '"), str_CurrentTransferName, Translate("' AND [Liquid Class] = '"), str_LiquidClass, Translate("' AND [Asp Volume] = '"), str_AspVolume, Translate("'"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
              if(0){
                Trace("");
                Trace(str_SQL_Filter);
                Trace("");
              }
              readReportFile.SetExtendedProperties( "IMEX=1");
              readReportFile.AddField("Transfer Name", xls_TransferName, hslString, 255);
              readReportFile.AddField("Channel Used", xls_chan_use, hslString, 255);
              readReportFile.AddField("Asp Rack BC", xls_BC_Rack_Asp, hslString, 255);
              readReportFile.AddField("Asp Container BC", xls_BC_Cont_Asp, hslString, 255);
              readReportFile.AddField("Asp LabID", xls_LabID_asp, hslString, 255);
              readReportFile.AddField("Asp PosID", xls_PosID_asp, hslString, 255);
              readReportFile.AddField("Asp Volume", xls_vol_asp, hslString, 255);
              readReportFile.AddField("Asp Status", xls_Status_asp, hslString, 255);
              readReportFile.AddField("Asp Recovery", xls_Recov_asp, hslString, 255);
              readReportFile.AddField("Disp Rack BC", xls_BC_Rack_Disp, hslString, 255);
              readReportFile.AddField("Disp Container BC", xls_BC_Cont_Disp, hslString, 255);
              readReportFile.AddField("Disp LabID", xls_LabID_disp, hslString, 255);
              readReportFile.AddField("Disp PosID", xls_PosID_disp, hslString, 255);
              readReportFile.AddField("Disp Volume", xls_vol_disp, hslString, 255);
              readReportFile.AddField("Disp Status", xls_Status_disp, hslString, 255);
              readReportFile.AddField("Disp Recovery", xls_Recov_disp, hslString, 255);
              readReportFile.AddField("Liquid Class", xls_LiquidClass, hslString, 255);
              readReportFile.AddField("Step Number Asp", str_StepNum_Asp, hslString, 255);
              readReportFile.AddField("Step Number Disp", str_StepNum_Disp, hslString, 255);
              readReportFile.AddField("TADM Curve ID Asp", str_TADM_CurveID_Asp, hslString, 255);
              readReportFile.AddField("TADM Curve ID Disp", str_TADM_CurveID_Disp, hslString, 255);
              readReportFile.AddField("TADM Time Stamp Asp", str_TADM_Time_Asp, hslString, 255);
              readReportFile.AddField("TADM Time Stamp Disp", str_TADM_Time_Disp, hslString, 255);
              readReportFile.AddField("TADM Mode", str_TADM_Mode, hslString, 255);
              if( 0 == readReportFile.Open(i_str_ExportFilePath + " " + "Report", hslRead, str_SQL_Filter) )
              {
                    MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_ExportFilePath, "HxMetEdCompCmd");
              }
              arr_CurveIDs.SetSize(0);
              {
                while (
                   (readReportFile.Eof() == 0)
                )
                {
                  if( 0 == readReportFile.ReadRecord() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  if (str_TADM_CurveID_Asp != "-----")
                  {
                    int_TADM_CurveID_Asp = StrIVal(str_TADM_CurveID_Asp);
                    arr_CurveIDs.AddAsLast(int_TADM_CurveID_Asp);
                  }
                }
              }
              if( 0 != readReportFile.Close() )
              {
                    MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              readReportFile.RemoveFields();
              if(0){
                Util2::Debug::TraceArray(Translate("Curve IDs"), arr_CurveIDs);
              }
              _ExportTADMCurve(i_str_ExportFilePath, str_CurrentTransferName, arr_CurveIDs, 1, int_CurveCount);
            }
          }
        }
        if (i_bool_ByDispense == 1)
        {
          if(0){
            str_SQL_Count = StrConcat4(Translate("SELECT [Liquid Class], [Disp Volume], COUNT(*) AS N FROM [Report] WHERE [TADM Mode] <> '-----'"), Translate(" GROUP BY [Liquid Class], [Disp Volume]"), Translate(""), Translate(""));
          }
          str_SQL_Count = StrConcat4(Translate("SELECT [Liquid Class], [Disp Volume], COUNT(*) AS N FROM [Report] WHERE [TADM Mode] <> '-----'"), Translate(" AND [Transfer Name] = '"), str_CurrentTransferName, Translate("' GROUP BY [Liquid Class], [Disp Volume] ORDER BY [Disp Volume] ASC"));
          getLiquidClass.AddField("Liquid Class", str_LiquidClass, hslString, 255);
          getLiquidClass.AddField("Disp Volume", flt_DispVolume, hslFloat);
          getLiquidClass.AddField("N", int_Count, hslInteger);
          if( 0 == getLiquidClass.Open(i_str_ExportFilePath + " " + "Report", hslAppend, str_SQL_Count) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_ExportFilePath, "HxMetEdCompCmd");
          }
          arr_UniqueLiquidClassVolume.SetSize(0);
          arr_LiquidClass.SetSize(0);
          arr_Volume.SetSize(0);
          {
            while (
               (getLiquidClass.Eof() == 0)
            )
            {
              if( 0 == getLiquidClass.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              str_LiquidClassVolume = StrConcat4(str_LiquidClass, Translate("_"), flt_AspVolume, Translate(""));
              arr_UniqueLiquidClassVolume.AddAsLast(str_LiquidClassVolume);
              arr_LiquidClass.AddAsLast(str_LiquidClass);
              arr_Volume.AddAsLast(flt_DispVolume);
            }
          }
          if( 0 != getLiquidClass.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          getLiquidClass.RemoveFields();
          int_TotalLiquidClasses=arr_UniqueLiquidClassVolume.GetSize();
          {
            for(a = 0; a < int_TotalLiquidClasses;)
            {
              a = a + 1;
              str_LiquidClass=arr_LiquidClass.GetAt(a-1);
              flt_DispVolume=arr_Volume.GetAt(a-1);
              str_DispVolume = StrConcat2(flt_DispVolume, Translate(""));
              str_DispVolume = StrTrimRight(str_DispVolume, Translate("0"));
              int_Check = StrRight(str_DispVolume, 1);
              if (int_Check == ".")
              {
                StrReplace(str_DispVolume, Translate("."), Translate(".0"));
              }
              str_SQL_Filter = StrConcat12(Translate("SELECT * FROM [Report$]  WHERE [Transfer Name] = '"), str_CurrentTransferName, Translate("' AND [Liquid Class] = '"), str_LiquidClass, Translate("' AND [Disp Volume] = '"), str_DispVolume, Translate("'"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
              if(0){
                Trace("");
                Trace(str_SQL_Filter);
                Trace("");
              }
              readReportFile.SetExtendedProperties( "IMEX=1");
              readReportFile.AddField("Transfer Name", xls_TransferName, hslString, 255);
              readReportFile.AddField("Channel Used", xls_chan_use, hslString, 255);
              readReportFile.AddField("Asp Rack BC", xls_BC_Rack_Asp, hslString, 255);
              readReportFile.AddField("Asp Container BC", xls_BC_Cont_Asp, hslString, 255);
              readReportFile.AddField("Asp LabID", xls_LabID_asp, hslString, 255);
              readReportFile.AddField("Asp PosID", xls_PosID_asp, hslString, 255);
              readReportFile.AddField("Asp Volume", xls_vol_asp, hslString, 255);
              readReportFile.AddField("Asp Status", xls_Status_asp, hslString, 255);
              readReportFile.AddField("Asp Recovery", xls_Recov_asp, hslString, 255);
              readReportFile.AddField("Disp Rack BC", xls_BC_Rack_Disp, hslString, 255);
              readReportFile.AddField("Disp Container BC", xls_BC_Cont_Disp, hslString, 255);
              readReportFile.AddField("Disp LabID", xls_LabID_disp, hslString, 255);
              readReportFile.AddField("Disp PosID", xls_PosID_disp, hslString, 255);
              readReportFile.AddField("Disp Volume", xls_vol_disp, hslString, 255);
              readReportFile.AddField("Disp Status", xls_Status_disp, hslString, 255);
              readReportFile.AddField("Disp Recovery", xls_Recov_disp, hslString, 255);
              readReportFile.AddField("Liquid Class", xls_LiquidClass, hslString, 255);
              readReportFile.AddField("Step Number Asp", str_StepNum_Asp, hslString, 255);
              readReportFile.AddField("Step Number Disp", str_StepNum_Disp, hslString, 255);
              readReportFile.AddField("TADM Curve ID Asp", str_TADM_CurveID_Asp, hslString, 255);
              readReportFile.AddField("TADM Curve ID Disp", str_TADM_CurveID_Disp, hslString, 255);
              readReportFile.AddField("TADM Time Stamp Asp", str_TADM_Time_Asp, hslString, 255);
              readReportFile.AddField("TADM Time Stamp Disp", str_TADM_Time_Disp, hslString, 255);
              readReportFile.AddField("TADM Mode", str_TADM_Mode, hslString, 255);
              if( 0 == readReportFile.Open(i_str_ExportFilePath + " " + "Report", hslRead, str_SQL_Filter) )
              {
                    MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_ExportFilePath, "HxMetEdCompCmd");
              }
              arr_CurveIDs.SetSize(0);
              {
                while (
                   (readReportFile.Eof() == 0)
                )
                {
                  if( 0 == readReportFile.ReadRecord() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  if (str_TADM_CurveID_Disp != "-----")
                  {
                    int_TADM_CurveID_Disp = StrIVal(str_TADM_CurveID_Disp);
                    arr_CurveIDs.AddAsLast(int_TADM_CurveID_Disp);
                  }
                }
              }
              if( 0 != readReportFile.Close() )
              {
                    MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              readReportFile.RemoveFields();
              if(0){
                Util2::Debug::TraceArray(Translate("Curve IDs"), arr_CurveIDs);
              }
              _ExportTADMCurve(i_str_ExportFilePath, str_CurrentTransferName, arr_CurveIDs, 0, int_CurveCount);
            }
          }
        }
      }
    }
  }

  private function _ExportTADMCurve( variable i_str_TADM_CurveFile, variable i_str_TabName, variable & i_arr_CurveIDs[], variable i_bool_Aspiration, variable & io_int_CurveCount ) void {
    private variable str_MacroTemplateCopy;
    private variable str_MacroTemplateFile;
    private variable str_LibraryFolderPath;
    private variable str_SheetName;
    private variable str_TADM_CurveFile;
    private variable str_FileStepType;
    private variable int_TadmMode;
    private variable int_Stepnumber;
    private variable str_Time;
    private variable str_LiquidClass;
    private variable int_ChannelNumber;
    private variable int_CurveID;
    private variable str_ExportFolder;
    private variable flt_Volume;
    private variable str_TADM_FileName;
    private variable int_TadmError;
    private file CurveFileRead;
    private variable str_CSV_FileName;
    private variable bool_ValueFound;
    private variable str_ExportFileName;
    private variable bool_FileExists;
    private variable int_Remainder;
    private variable int_MaxPerCurve;
    private variable int_TotalCurves;
    private variable i;
    private variable int_LoopNum;
    private variable int_ArrayIndex;
    private variable int_CurveNum;
    private variable int_StartingPoint;
    private variable int_EndingPoint;
    private variable a;
    private file MacroFile;
    private file InitFile;
    private variable str_TADM_DatabaseFile;
    private variable str_TADM_CurveFileOriginal;
    _Get_TADM_FileName(str_TADM_DatabaseFile);
    str_LibraryFolderPath = FilGetLibraryPath();
    str_ExportFolder = StrConcat4(str_LibraryFolderPath, Translate("\\TADM Export Curves\\Resource Files\\Export CSV"), Translate(""), Translate(""));
    str_MacroTemplateFile = StrConcat4(str_LibraryFolderPath, Translate("\\TADM Export Curves\\Resource Files\\Macro File\\"), Translate("TADM_Export_MacroFile_Template"), Translate(".xls"));
    str_MacroTemplateCopy = StrConcat4(str_LibraryFolderPath, Translate("\\TADM Export Curves\\Resource Files\\Macro File\\"), Translate("TADM_Export_File"), Translate(".xls"));
    str_TADM_FileName = HSLExtensions::File::GetFileNameWithoutExtension(str_TADM_DatabaseFile);
    str_TADM_CurveFileOriginal = StrConcat4(str_ExportFolder, Translate("\\"), str_TADM_FileName, Translate("-Curves.csv"));
    str_TADM_CurveFile = StrConcat4(str_ExportFolder, Translate("\\"), Translate("TADM_EXPORT"), Translate("-Curves.csv"));
    bool_FileExists = HSLExtensions::File::Exists(str_TADM_CurveFileOriginal);
    if (bool_FileExists == 1)
    {
      HSLExtensions::File::Rename(str_TADM_CurveFileOriginal, str_TADM_CurveFile, 1);
    }
    Trace("Curve File Path:  ",str_TADM_CurveFile);
    EDITFILEATTRIBUTES::Remove_ReadOnly(str_TADM_CurveFile);
    CurveFileRead.SetExtendedProperties( "HDR=NO");
    CurveFileRead.AddField(1, str_LiquidClass, hslString, 255);
    CurveFileRead.AddField(2, flt_Volume, hslFloat);
    CurveFileRead.AddField(3, str_FileStepType, hslString, 255);
    CurveFileRead.AddField(4, str_SheetName, hslString, 255);
    CurveFileRead.AddField(5, int_CurveID, hslInteger);
    CurveFileRead.AddField(6, int_ChannelNumber, hslInteger);
    CurveFileRead.AddField(7, str_Time, hslString, 255);
    CurveFileRead.AddField(8, int_Stepnumber, hslInteger);
    CurveFileRead.AddField(9, int_TadmMode, hslInteger);
    CurveFileRead.AddField(10, int_TadmError, hslInteger);
    CurveFileRead.SetDelimiter(hslCSVDelimited);
    if( 0 == CurveFileRead.Open(str_TADM_CurveFile, hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_TADM_CurveFile, "HxMetEdCompCmd");
    }
    CurveFileRead.Seek(1, hslFirst);
    str_CSV_FileName = Translate("");
    str_LiquidClass = Translate("");
    flt_Volume = 0.0;
    if(0){
      Util2::Debug::TraceArray(Translate("Curve IDs"), i_arr_CurveIDs);
    }
    {
      while (
         (CurveFileRead.Eof() == 0)
      )
      {
        if( 0 == CurveFileRead.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        bool_ValueFound = HSLExtensions::Array::ContainsValue(i_arr_CurveIDs, int_CurveID);
        if (bool_ValueFound == 1)
        {
          str_CSV_FileName = str_SheetName;
          break;
        }
      }
    }
    if( 0 != CurveFileRead.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    CurveFileRead.RemoveFields();
    str_ExportFileName = StrConcat8(str_ExportFolder, Translate("\\"), str_TADM_FileName, Translate("-"), str_CSV_FileName, Translate(".csv"), Translate(""), Translate(""));
    Trace("Export File Name:  ",str_ExportFileName);
    bool_FileExists = HSLExtensions::File::Exists(str_ExportFileName);
    if (bool_FileExists == 0)
    {
      MECC::TraceComment(Translate("============== TADM EXPORT FILE NOT FOUND!"));
      return;
    }
    int_TotalCurves=i_arr_CurveIDs.GetSize();
    int_MaxPerCurve = 96;
    int_LoopNum = int_TotalCurves / int_MaxPerCurve;
    int_Remainder = int_TotalCurves % int_MaxPerCurve;
    if (int_Remainder > 0)
    {
      int_LoopNum = int_LoopNum + 1;
    }
    int_ArrayIndex = 1;
    Trace("Total Curves:  ",int_TotalCurves);
    Trace("Total Loops:  ",int_LoopNum);
    _RemoveUnusedCharacters(i_str_TabName);
    onerror goto errLabel_5 ;
    err.Clear();
    InitFile.SetExtendedProperties( "HDR=NO");
    InitFile.AddField(1, i_str_TabName, hslString, 255);
    if( 0 == InitFile.Open(i_str_TADM_CurveFile + " " + i_str_TabName, hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_TADM_CurveFile, "HxMetEdCompCmd");
    }
    if( 0 == InitFile.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != InitFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    InitFile.RemoveFields();
    errLabel_5 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
    {
      for(i = 0; i < int_LoopNum;)
      {
        i = i + 1;
        HSLExtensions::File::Delete(str_MacroTemplateCopy);
        HSLExtensions::File::Copy(str_MacroTemplateFile, str_MacroTemplateCopy, 1);
        int_CurveNum = int_TotalCurves;
        if (int_TotalCurves > int_MaxPerCurve)
        {
          int_CurveNum = int_MaxPerCurve;
        }
        int_TotalCurves = int_TotalCurves - int_CurveNum;
        MacroFile.AddField("Time", int_CurveID, hslInteger);
        if( 0 == MacroFile.Open(str_MacroTemplateCopy + " " + "CURVE_IDS", hslWrite) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_MacroTemplateCopy, "HxMetEdCompCmd");
        }
        int_StartingPoint = int_ArrayIndex;
        {
          for(a = 0; a < int_CurveNum;)
          {
            a = a + 1;
            int_CurveID=i_arr_CurveIDs.GetAt(int_ArrayIndex-1);
            if( 0 == MacroFile.WriteRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            int_ArrayIndex = int_ArrayIndex + 1;
          }
        }
        int_EndingPoint = int_ArrayIndex - 1;
        if( 0 != MacroFile.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        MacroFile.RemoveFields();
        Trace("Curve Count:  ",io_int_CurveCount);
        _RunMacro(str_MacroTemplateCopy, str_ExportFileName, i_str_TADM_CurveFile, str_LiquidClass, i_str_TabName, flt_Volume, int_StartingPoint, int_EndingPoint, io_int_CurveCount, i_bool_Aspiration);
        io_int_CurveCount = io_int_CurveCount + 1;
      }
    }
  }

  function ExportTADM_By_DestLabID( variable i_str_ExportFilePath, variable i_bool_ByAspiration, variable i_bool_ByDispense ) void {
    private variable xls_PosID_asp;
    private variable xls_BC_Rack_Asp;
    private variable xls_Recov_asp;
    private variable xls_BC_Cont_Asp;
    private variable xls_BC_Cont_Disp;
    private variable xls_BC_Rack_Disp;
    private variable xls_LabID_asp;
    private variable return_Value;
    private variable str_TADM_CurveID_Disp;
    private variable str_LiquidClassVolume;
    private variable str_TADM_Mode;
    private variable str_TADM_Time_Disp;
    private variable str_StepNum_Asp;
    private variable xls_chan_use;
    private variable str_TADM_CurveID_Asp;
    private variable i;
    private variable str_AspVolume;
    private variable str_TADM_Time_Asp;
    private variable str_StepNum_Disp;
    private variable xls_Status_asp;
    private variable int_TADM_CurveID_Asp;
    private variable int_TotalLiquidClasses;
    private variable str_DispVolume;
    private variable xls_vol_disp;
    private variable int_Check;
    private variable str_SQL_Count;
    private variable xls_Recov_disp;
    private variable int_TotalTransfers;
    private variable xls_LabID_disp;
    private variable bool_FileExists;
    private variable xls_TransferName;
    private variable flt_DispVolume;
    private variable str_LiquidClass;
    private variable int_CurveCount;
    private variable int_TADM_CurveID_Disp;
    private variable str_SQL_Filter;
    private variable a;
    private variable str_TADM_File;
    private variable str_CurrentTransferName;
    private variable int_Count;
    private variable str_ExportFolder;
    private variable str_LibraryFolderPath;
    private variable xls_Status_disp;
    private variable xls_vol_asp;
    private variable flt_AspVolume;
    private variable xls_LiquidClass;
    private variable xls_PosID_disp;
    private file readReportFile;
    private file getLiquidClass;
    private variable arr_UniqueTransferName[];
    private variable arr_Volume[];
    private variable arr_LiquidClass[];
    private variable arr_CurveIDs[];
    private variable arr_UniqueLiquidClassVolume[];
    private variable int_Index;
    bool_FileExists = HSLExtensions::File::Exists(i_str_ExportFilePath);
    if (bool_FileExists == 0)
    {
      Trace("----------- ",i_str_ExportFilePath," was not found!");
      return;
    }
    str_SQL_Count = StrConcat4(Translate("SELECT COUNT(*) AS N FROM [Report] WHERE [TADM Mode] <> '-----'"), Translate(""), Translate(""), Translate(""));
    readReportFile.AddField("N", int_Count, hslInteger);
    if( 0 == readReportFile.Open(i_str_ExportFilePath + " " + "Report", hslRead, str_SQL_Count) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_ExportFilePath, "HxMetEdCompCmd");
    }
    if( 0 == readReportFile.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != readReportFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    readReportFile.RemoveFields();
    if (int_Count == 0)
    {
      MECC::TraceComment(Translate("------------------- No TADM Data found!"));
      return;
    }
    str_SQL_Filter = StrConcat4(Translate("SELECT [Disp LabID] FROM [Report] WHERE [TADM Mode] <> '-----'"), Translate(" AND [Disp LabID] <> '-----'"), Translate(""), Translate(""));
    readReportFile.AddField("Disp LabID", xls_LabID_disp, hslString, 255);
    if( 0 == readReportFile.Open(i_str_ExportFilePath + " " + "Report", hslRead, str_SQL_Filter) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_ExportFilePath, "HxMetEdCompCmd");
    }
    arr_UniqueTransferName.SetSize(0);
    Trace("");
    {
      while (
         (readReportFile.Eof() == 0)
      )
      {
        if( 0 == readReportFile.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        int_Index = _LookUp(arr_UniqueTransferName, xls_LabID_disp);
        if (int_Index == 0)
        {
          arr_UniqueTransferName.AddAsLast(xls_LabID_disp);
          Trace("Dispense Lab ID:  ",xls_LabID_disp);
        }
      }
    }
    if( 0 != readReportFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    readReportFile.RemoveFields();
    Trace("");
    Trace("     ","Add Aspiration Curves:  ",i_bool_ByAspiration);
    Trace("     ","Add Dispense Cuves:  ",i_bool_ByDispense);
    Trace("");
    _Get_TADM_FileName(str_TADM_File);
    _DeleteExportFiles();
    str_LibraryFolderPath = FilGetLibraryPath();
    str_ExportFolder = StrConcat4(str_LibraryFolderPath, Translate("\\TADM Export Curves\\Resource Files\\Export CSV"), Translate(""), Translate(""));
    return_Value = RunTADMExport(str_TADM_File, str_ExportFolder);
    Trace("Return Value:  ",return_Value);
    if (return_Value != 0)
    {
      MECC::TraceComment(Translate("\nTHERE WAS AN ISSUE EXPORTING THE TADM DATA\n"));
      return;
    }
    int_TotalTransfers=arr_UniqueTransferName.GetSize();
    {
      for(i = 0; i < int_TotalTransfers;)
      {
        i = i + 1;
        str_CurrentTransferName=arr_UniqueTransferName.GetAt(i-1);
        int_CurveCount = 1;
        if (i_bool_ByAspiration == 1)
        {
          if(0){
            str_SQL_Count = StrConcat4(Translate("SELECT [Liquid Class], [Asp Volume], COUNT(*) AS N FROM [Report] WHERE [TADM Mode] <> '-----'"), Translate(" GROUP BY [Liquid Class], [Asp Volume]"), Translate(""), Translate(""));
          }
          str_SQL_Count = StrConcat4(Translate("SELECT [Liquid Class], [Asp Volume], COUNT(*) AS N FROM [Report] WHERE [TADM Mode] <> '-----'"), Translate(" AND [Disp LabID] = '"), str_CurrentTransferName, Translate("' GROUP BY [Liquid Class], [Asp Volume] ORDER BY [Asp Volume] ASC"));
          getLiquidClass.AddField("Liquid Class", str_LiquidClass, hslString, 255);
          getLiquidClass.AddField("Asp Volume", flt_AspVolume, hslFloat);
          getLiquidClass.AddField("N", int_Count, hslInteger);
          if( 0 == getLiquidClass.Open(i_str_ExportFilePath + " " + "Report", hslAppend, str_SQL_Count) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_ExportFilePath, "HxMetEdCompCmd");
          }
          arr_UniqueLiquidClassVolume.SetSize(0);
          arr_LiquidClass.SetSize(0);
          arr_Volume.SetSize(0);
          {
            while (
               (getLiquidClass.Eof() == 0)
            )
            {
              if( 0 == getLiquidClass.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              str_LiquidClassVolume = StrConcat4(str_LiquidClass, Translate("_"), flt_AspVolume, Translate(""));
              arr_UniqueLiquidClassVolume.AddAsLast(str_LiquidClassVolume);
              arr_LiquidClass.AddAsLast(str_LiquidClass);
              arr_Volume.AddAsLast(flt_AspVolume);
            }
          }
          if( 0 != getLiquidClass.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          getLiquidClass.RemoveFields();
          int_TotalLiquidClasses=arr_UniqueLiquidClassVolume.GetSize();
          {
            for(a = 0; a < int_TotalLiquidClasses;)
            {
              a = a + 1;
              str_LiquidClass=arr_LiquidClass.GetAt(a-1);
              flt_AspVolume=arr_Volume.GetAt(a-1);
              str_AspVolume = StrConcat2(flt_AspVolume, Translate(""));
              str_AspVolume = StrTrimRight(str_AspVolume, Translate("0"));
              int_Check = StrRight(str_AspVolume, 1);
              if (int_Check == ".")
              {
                StrReplace(str_AspVolume, Translate("."), Translate(".0"));
              }
              str_SQL_Filter = StrConcat12(Translate("SELECT * FROM [Report$]  WHERE [Disp LabID] = '"), str_CurrentTransferName, Translate("' AND [Liquid Class] = '"), str_LiquidClass, Translate("' AND [Asp Volume] = '"), str_AspVolume, Translate("'"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
              if(0){
                Trace("");
                Trace(str_SQL_Filter);
                Trace("");
              }
              readReportFile.SetExtendedProperties( "IMEX=1");
              readReportFile.AddField("Transfer Name", xls_TransferName, hslString, 255);
              readReportFile.AddField("Channel Used", xls_chan_use, hslString, 255);
              readReportFile.AddField("Asp Rack BC", xls_BC_Rack_Asp, hslString, 255);
              readReportFile.AddField("Asp Container BC", xls_BC_Cont_Asp, hslString, 255);
              readReportFile.AddField("Asp LabID", xls_LabID_asp, hslString, 255);
              readReportFile.AddField("Asp PosID", xls_PosID_asp, hslString, 255);
              readReportFile.AddField("Asp Volume", xls_vol_asp, hslString, 255);
              readReportFile.AddField("Asp Status", xls_Status_asp, hslString, 255);
              readReportFile.AddField("Asp Recovery", xls_Recov_asp, hslString, 255);
              readReportFile.AddField("Disp Rack BC", xls_BC_Rack_Disp, hslString, 255);
              readReportFile.AddField("Disp Container BC", xls_BC_Cont_Disp, hslString, 255);
              readReportFile.AddField("Disp LabID", xls_LabID_disp, hslString, 255);
              readReportFile.AddField("Disp PosID", xls_PosID_disp, hslString, 255);
              readReportFile.AddField("Disp Volume", xls_vol_disp, hslString, 255);
              readReportFile.AddField("Disp Status", xls_Status_disp, hslString, 255);
              readReportFile.AddField("Disp Recovery", xls_Recov_disp, hslString, 255);
              readReportFile.AddField("Liquid Class", xls_LiquidClass, hslString, 255);
              readReportFile.AddField("Step Number Asp", str_StepNum_Asp, hslString, 255);
              readReportFile.AddField("Step Number Disp", str_StepNum_Disp, hslString, 255);
              readReportFile.AddField("TADM Curve ID Asp", str_TADM_CurveID_Asp, hslString, 255);
              readReportFile.AddField("TADM Curve ID Disp", str_TADM_CurveID_Disp, hslString, 255);
              readReportFile.AddField("TADM Time Stamp Asp", str_TADM_Time_Asp, hslString, 255);
              readReportFile.AddField("TADM Time Stamp Disp", str_TADM_Time_Disp, hslString, 255);
              readReportFile.AddField("TADM Mode", str_TADM_Mode, hslString, 255);
              if( 0 == readReportFile.Open(i_str_ExportFilePath + " " + "Report", hslRead, str_SQL_Filter) )
              {
                    MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_ExportFilePath, "HxMetEdCompCmd");
              }
              arr_CurveIDs.SetSize(0);
              {
                while (
                   (readReportFile.Eof() == 0)
                )
                {
                  if( 0 == readReportFile.ReadRecord() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  if (str_TADM_CurveID_Asp != "-----")
                  {
                    int_TADM_CurveID_Asp = StrIVal(str_TADM_CurveID_Asp);
                    arr_CurveIDs.AddAsLast(int_TADM_CurveID_Asp);
                  }
                }
              }
              if( 0 != readReportFile.Close() )
              {
                    MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              readReportFile.RemoveFields();
              if(0){
                Util2::Debug::TraceArray(Translate("Curve IDs"), arr_CurveIDs);
              }
              _ExportTADMCurve(i_str_ExportFilePath, str_CurrentTransferName, arr_CurveIDs, 1, int_CurveCount);
            }
          }
        }
        if (i_bool_ByDispense == 1)
        {
          if(0){
            str_SQL_Count = StrConcat4(Translate("SELECT [Liquid Class], [Disp Volume], COUNT(*) AS N FROM [Report] WHERE [TADM Mode] <> '-----'"), Translate(" GROUP BY [Liquid Class], [Disp Volume]"), Translate(""), Translate(""));
          }
          str_SQL_Count = StrConcat4(Translate("SELECT [Liquid Class], [Disp Volume], COUNT(*) AS N FROM [Report] WHERE [TADM Mode] <> '-----'"), Translate(" AND [Disp LabID] = '"), str_CurrentTransferName, Translate("' GROUP BY [Liquid Class], [Disp Volume] ORDER BY [Disp Volume] ASC"));
          getLiquidClass.AddField("Liquid Class", str_LiquidClass, hslString, 255);
          getLiquidClass.AddField("Disp Volume", flt_DispVolume, hslFloat);
          getLiquidClass.AddField("N", int_Count, hslInteger);
          if( 0 == getLiquidClass.Open(i_str_ExportFilePath + " " + "Report", hslAppend, str_SQL_Count) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_ExportFilePath, "HxMetEdCompCmd");
          }
          arr_UniqueLiquidClassVolume.SetSize(0);
          arr_LiquidClass.SetSize(0);
          arr_Volume.SetSize(0);
          {
            while (
               (getLiquidClass.Eof() == 0)
            )
            {
              if( 0 == getLiquidClass.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              str_LiquidClassVolume = StrConcat4(str_LiquidClass, Translate("_"), flt_AspVolume, Translate(""));
              arr_UniqueLiquidClassVolume.AddAsLast(str_LiquidClassVolume);
              arr_LiquidClass.AddAsLast(str_LiquidClass);
              arr_Volume.AddAsLast(flt_DispVolume);
            }
          }
          if( 0 != getLiquidClass.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          getLiquidClass.RemoveFields();
          int_TotalLiquidClasses=arr_UniqueLiquidClassVolume.GetSize();
          {
            for(a = 0; a < int_TotalLiquidClasses;)
            {
              a = a + 1;
              str_LiquidClass=arr_LiquidClass.GetAt(a-1);
              flt_DispVolume=arr_Volume.GetAt(a-1);
              str_DispVolume = StrConcat2(flt_DispVolume, Translate(""));
              str_DispVolume = StrTrimRight(str_DispVolume, Translate("0"));
              int_Check = StrRight(str_DispVolume, 1);
              if (int_Check == ".")
              {
                StrReplace(str_DispVolume, Translate("."), Translate(".0"));
              }
              str_SQL_Filter = StrConcat12(Translate("SELECT * FROM [Report$]  WHERE [Disp LabID] = '"), str_CurrentTransferName, Translate("' AND [Liquid Class] = '"), str_LiquidClass, Translate("' AND [Disp Volume] = '"), str_DispVolume, Translate("'"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
              if(0){
                Trace("");
                Trace(str_SQL_Filter);
                Trace("");
              }
              readReportFile.SetExtendedProperties( "IMEX=1");
              readReportFile.AddField("Transfer Name", xls_TransferName, hslString, 255);
              readReportFile.AddField("Channel Used", xls_chan_use, hslString, 255);
              readReportFile.AddField("Asp Rack BC", xls_BC_Rack_Asp, hslString, 255);
              readReportFile.AddField("Asp Container BC", xls_BC_Cont_Asp, hslString, 255);
              readReportFile.AddField("Asp LabID", xls_LabID_asp, hslString, 255);
              readReportFile.AddField("Asp PosID", xls_PosID_asp, hslString, 255);
              readReportFile.AddField("Asp Volume", xls_vol_asp, hslString, 255);
              readReportFile.AddField("Asp Status", xls_Status_asp, hslString, 255);
              readReportFile.AddField("Asp Recovery", xls_Recov_asp, hslString, 255);
              readReportFile.AddField("Disp Rack BC", xls_BC_Rack_Disp, hslString, 255);
              readReportFile.AddField("Disp Container BC", xls_BC_Cont_Disp, hslString, 255);
              readReportFile.AddField("Disp LabID", xls_LabID_disp, hslString, 255);
              readReportFile.AddField("Disp PosID", xls_PosID_disp, hslString, 255);
              readReportFile.AddField("Disp Volume", xls_vol_disp, hslString, 255);
              readReportFile.AddField("Disp Status", xls_Status_disp, hslString, 255);
              readReportFile.AddField("Disp Recovery", xls_Recov_disp, hslString, 255);
              readReportFile.AddField("Liquid Class", xls_LiquidClass, hslString, 255);
              readReportFile.AddField("Step Number Asp", str_StepNum_Asp, hslString, 255);
              readReportFile.AddField("Step Number Disp", str_StepNum_Disp, hslString, 255);
              readReportFile.AddField("TADM Curve ID Asp", str_TADM_CurveID_Asp, hslString, 255);
              readReportFile.AddField("TADM Curve ID Disp", str_TADM_CurveID_Disp, hslString, 255);
              readReportFile.AddField("TADM Time Stamp Asp", str_TADM_Time_Asp, hslString, 255);
              readReportFile.AddField("TADM Time Stamp Disp", str_TADM_Time_Disp, hslString, 255);
              readReportFile.AddField("TADM Mode", str_TADM_Mode, hslString, 255);
              if( 0 == readReportFile.Open(i_str_ExportFilePath + " " + "Report", hslRead, str_SQL_Filter) )
              {
                    MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_ExportFilePath, "HxMetEdCompCmd");
              }
              arr_CurveIDs.SetSize(0);
              {
                while (
                   (readReportFile.Eof() == 0)
                )
                {
                  if( 0 == readReportFile.ReadRecord() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  if (str_TADM_CurveID_Disp != "-----")
                  {
                    int_TADM_CurveID_Disp = StrIVal(str_TADM_CurveID_Disp);
                    arr_CurveIDs.AddAsLast(int_TADM_CurveID_Disp);
                  }
                }
              }
              if( 0 != readReportFile.Close() )
              {
                    MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              readReportFile.RemoveFields();
              if(0){
                Util2::Debug::TraceArray(Translate("Curve IDs"), arr_CurveIDs);
              }
              _ExportTADMCurve(i_str_ExportFilePath, str_CurrentTransferName, arr_CurveIDs, 0, int_CurveCount);
            }
          }
        }
      }
    }
  }

  function ExportTADM_By_DestBC( variable i_str_ExportFilePath, variable i_bool_ByAspiration, variable i_bool_ByDispense ) void {
    private variable xls_PosID_asp;
    private variable xls_BC_Rack_Asp;
    private variable xls_Recov_asp;
    private variable xls_BC_Cont_Asp;
    private variable xls_BC_Cont_Disp;
    private variable xls_BC_Rack_Disp;
    private variable xls_LabID_asp;
    private variable return_Value;
    private variable str_TADM_CurveID_Disp;
    private variable str_LiquidClassVolume;
    private variable i;
    private variable str_TADM_Mode;
    private variable str_TADM_Time_Disp;
    private variable str_StepNum_Asp;
    private variable xls_chan_use;
    private variable str_TADM_CurveID_Asp;
    private variable str_AspVolume;
    private variable str_TADM_Time_Asp;
    private variable str_StepNum_Disp;
    private variable xls_Status_asp;
    private variable int_TotalLiquidClasses;
    private variable str_DispVolume;
    private variable int_TADM_CurveID_Asp;
    private variable xls_vol_disp;
    private variable int_Check;
    private variable str_SQL_Count;
    private variable xls_Recov_disp;
    private variable int_TotalTransfers;
    private variable flt_DispVolume;
    private variable xls_LabID_disp;
    private variable xls_TransferName;
    private variable bool_FileExists;
    private variable str_LiquidClass;
    private variable str_SQL_Filter;
    private variable int_TADM_CurveID_Disp;
    private variable int_CurveCount;
    private variable a;
    private variable str_ExportFolder;
    private variable str_TADM_File;
    private variable int_Count;
    private variable str_LibraryFolderPath;
    private variable str_CurrentTransferName;
    private variable xls_Status_disp;
    private variable xls_vol_asp;
    private variable flt_AspVolume;
    private variable xls_LiquidClass;
    private variable xls_PosID_disp;
    private file readReportFile;
    private file getLiquidClass;
    private variable arr_UniqueTransferName[];
    private variable arr_Volume[];
    private variable arr_LiquidClass[];
    private variable arr_CurveIDs[];
    private variable arr_UniqueLiquidClassVolume[];
    private variable int_Index;
    bool_FileExists = HSLExtensions::File::Exists(i_str_ExportFilePath);
    if (bool_FileExists == 0)
    {
      Trace("----------- ",i_str_ExportFilePath," was not found!");
      return;
    }
    str_SQL_Count = StrConcat4(Translate("SELECT COUNT(*) AS N FROM [Report] WHERE [TADM Mode] <> '-----'"), Translate(" AND [Disp Rack BC] <> '-----'"), Translate(""), Translate(""));
    readReportFile.AddField("N", int_Count, hslInteger);
    if( 0 == readReportFile.Open(i_str_ExportFilePath + " " + "Report", hslRead, str_SQL_Count) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_ExportFilePath, "HxMetEdCompCmd");
    }
    if( 0 == readReportFile.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != readReportFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    readReportFile.RemoveFields();
    if (int_Count == 0)
    {
      MECC::TraceComment(Translate("------------------- No TADM Data found!"));
      return;
    }
    str_SQL_Filter = StrConcat4(Translate("SELECT [Disp Rack BC] FROM [Report] WHERE [TADM Mode] <> '-----'"), Translate(" AND [Disp Rack BC] <> '-----'"), Translate(""), Translate(""));
    readReportFile.AddField("Disp Rack BC", xls_BC_Rack_Disp, hslString, 255);
    if( 0 == readReportFile.Open(i_str_ExportFilePath + " " + "Report", hslRead, str_SQL_Filter) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_ExportFilePath, "HxMetEdCompCmd");
    }
    arr_UniqueTransferName.SetSize(0);
    Trace("");
    {
      while (
         (readReportFile.Eof() == 0)
      )
      {
        if( 0 == readReportFile.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        int_Index = _LookUp(arr_UniqueTransferName, xls_BC_Rack_Disp);
        if (int_Index == 0)
        {
          arr_UniqueTransferName.AddAsLast(xls_BC_Rack_Disp);
          Trace("Dispense Barcode:  ",xls_BC_Rack_Disp);
        }
      }
    }
    if( 0 != readReportFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    readReportFile.RemoveFields();
    Trace("");
    Trace("     ","Add Aspiration Curves:  ",i_bool_ByAspiration);
    Trace("     ","Add Dispense Cuves:  ",i_bool_ByDispense);
    Trace("");
    _Get_TADM_FileName(str_TADM_File);
    _DeleteExportFiles();
    str_LibraryFolderPath = FilGetLibraryPath();
    str_ExportFolder = StrConcat4(str_LibraryFolderPath, Translate("\\TADM Export Curves\\Resource Files\\Export CSV"), Translate(""), Translate(""));
    return_Value = RunTADMExport(str_TADM_File, str_ExportFolder);
    Trace("Return Value:  ",return_Value);
    if (return_Value != 0)
    {
      MECC::TraceComment(Translate("\nTHERE WAS AN ISSUE EXPORTING THE TADM DATA\n"));
      return;
    }
    int_TotalTransfers=arr_UniqueTransferName.GetSize();
    {
      for(i = 0; i < int_TotalTransfers;)
      {
        i = i + 1;
        str_CurrentTransferName=arr_UniqueTransferName.GetAt(i-1);
        int_CurveCount = 1;
        if (i_bool_ByAspiration == 1)
        {
          if(0){
            str_SQL_Count = StrConcat4(Translate("SELECT [Liquid Class], [Asp Volume], COUNT(*) AS N FROM [Report] WHERE [TADM Mode] <> '-----'"), Translate(" GROUP BY [Liquid Class], [Asp Volume]"), Translate(""), Translate(""));
          }
          str_SQL_Count = StrConcat4(Translate("SELECT [Liquid Class], [Asp Volume], COUNT(*) AS N FROM [Report] WHERE [TADM Mode] <> '-----'"), Translate(" AND [Disp Rack BC] = '"), str_CurrentTransferName, Translate("' GROUP BY [Liquid Class], [Asp Volume] ORDER BY [Asp Volume] ASC"));
          getLiquidClass.AddField("Liquid Class", str_LiquidClass, hslString, 255);
          getLiquidClass.AddField("Asp Volume", flt_AspVolume, hslFloat);
          getLiquidClass.AddField("N", int_Count, hslInteger);
          if( 0 == getLiquidClass.Open(i_str_ExportFilePath + " " + "Report", hslAppend, str_SQL_Count) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_ExportFilePath, "HxMetEdCompCmd");
          }
          arr_UniqueLiquidClassVolume.SetSize(0);
          arr_LiquidClass.SetSize(0);
          arr_Volume.SetSize(0);
          {
            while (
               (getLiquidClass.Eof() == 0)
            )
            {
              if( 0 == getLiquidClass.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              str_LiquidClassVolume = StrConcat4(str_LiquidClass, Translate("_"), flt_AspVolume, Translate(""));
              arr_UniqueLiquidClassVolume.AddAsLast(str_LiquidClassVolume);
              arr_LiquidClass.AddAsLast(str_LiquidClass);
              arr_Volume.AddAsLast(flt_AspVolume);
            }
          }
          if( 0 != getLiquidClass.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          getLiquidClass.RemoveFields();
          int_TotalLiquidClasses=arr_UniqueLiquidClassVolume.GetSize();
          {
            for(a = 0; a < int_TotalLiquidClasses;)
            {
              a = a + 1;
              str_LiquidClass=arr_LiquidClass.GetAt(a-1);
              flt_AspVolume=arr_Volume.GetAt(a-1);
              str_AspVolume = StrConcat2(flt_AspVolume, Translate(""));
              str_AspVolume = StrTrimRight(str_AspVolume, Translate("0"));
              int_Check = StrRight(str_AspVolume, 1);
              if (int_Check == ".")
              {
                StrReplace(str_AspVolume, Translate("."), Translate(".0"));
              }
              str_SQL_Filter = StrConcat12(Translate("SELECT * FROM [Report$]  WHERE [Disp Rack BC] = '"), str_CurrentTransferName, Translate("' AND [Liquid Class] = '"), str_LiquidClass, Translate("' AND [Asp Volume] = '"), str_AspVolume, Translate("'"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
              if(0){
                Trace("");
                Trace(str_SQL_Filter);
                Trace("");
              }
              readReportFile.SetExtendedProperties( "IMEX=1");
              readReportFile.AddField("Transfer Name", xls_TransferName, hslString, 255);
              readReportFile.AddField("Channel Used", xls_chan_use, hslString, 255);
              readReportFile.AddField("Asp Rack BC", xls_BC_Rack_Asp, hslString, 255);
              readReportFile.AddField("Asp Container BC", xls_BC_Cont_Asp, hslString, 255);
              readReportFile.AddField("Asp LabID", xls_LabID_asp, hslString, 255);
              readReportFile.AddField("Asp PosID", xls_PosID_asp, hslString, 255);
              readReportFile.AddField("Asp Volume", xls_vol_asp, hslString, 255);
              readReportFile.AddField("Asp Status", xls_Status_asp, hslString, 255);
              readReportFile.AddField("Asp Recovery", xls_Recov_asp, hslString, 255);
              readReportFile.AddField("Disp Rack BC", xls_BC_Rack_Disp, hslString, 255);
              readReportFile.AddField("Disp Container BC", xls_BC_Cont_Disp, hslString, 255);
              readReportFile.AddField("Disp LabID", xls_LabID_disp, hslString, 255);
              readReportFile.AddField("Disp PosID", xls_PosID_disp, hslString, 255);
              readReportFile.AddField("Disp Volume", xls_vol_disp, hslString, 255);
              readReportFile.AddField("Disp Status", xls_Status_disp, hslString, 255);
              readReportFile.AddField("Disp Recovery", xls_Recov_disp, hslString, 255);
              readReportFile.AddField("Liquid Class", xls_LiquidClass, hslString, 255);
              readReportFile.AddField("Step Number Asp", str_StepNum_Asp, hslString, 255);
              readReportFile.AddField("Step Number Disp", str_StepNum_Disp, hslString, 255);
              readReportFile.AddField("TADM Curve ID Asp", str_TADM_CurveID_Asp, hslString, 255);
              readReportFile.AddField("TADM Curve ID Disp", str_TADM_CurveID_Disp, hslString, 255);
              readReportFile.AddField("TADM Time Stamp Asp", str_TADM_Time_Asp, hslString, 255);
              readReportFile.AddField("TADM Time Stamp Disp", str_TADM_Time_Disp, hslString, 255);
              readReportFile.AddField("TADM Mode", str_TADM_Mode, hslString, 255);
              if( 0 == readReportFile.Open(i_str_ExportFilePath + " " + "Report", hslRead, str_SQL_Filter) )
              {
                    MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_ExportFilePath, "HxMetEdCompCmd");
              }
              arr_CurveIDs.SetSize(0);
              {
                while (
                   (readReportFile.Eof() == 0)
                )
                {
                  if( 0 == readReportFile.ReadRecord() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  if (str_TADM_CurveID_Asp != "-----")
                  {
                    int_TADM_CurveID_Asp = StrIVal(str_TADM_CurveID_Asp);
                    arr_CurveIDs.AddAsLast(int_TADM_CurveID_Asp);
                  }
                }
              }
              if( 0 != readReportFile.Close() )
              {
                    MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              readReportFile.RemoveFields();
              if(0){
                Util2::Debug::TraceArray(Translate("Curve IDs"), arr_CurveIDs);
              }
              _ExportTADMCurve(i_str_ExportFilePath, str_CurrentTransferName, arr_CurveIDs, 1, int_CurveCount);
            }
          }
        }
        if (i_bool_ByDispense == 1)
        {
          if(0){
            str_SQL_Count = StrConcat4(Translate("SELECT [Liquid Class], [Disp Volume], COUNT(*) AS N FROM [Report] WHERE [TADM Mode] <> '-----'"), Translate(" GROUP BY [Liquid Class], [Disp Volume]"), Translate(""), Translate(""));
          }
          str_SQL_Count = StrConcat4(Translate("SELECT [Liquid Class], [Disp Volume], COUNT(*) AS N FROM [Report] WHERE [TADM Mode] <> '-----'"), Translate(" AND [Disp Rack BC] = '"), str_CurrentTransferName, Translate("' GROUP BY [Liquid Class], [Disp Volume] ORDER BY [Disp Volume] ASC"));
          getLiquidClass.AddField("Liquid Class", str_LiquidClass, hslString, 255);
          getLiquidClass.AddField("Disp Volume", flt_DispVolume, hslFloat);
          getLiquidClass.AddField("N", int_Count, hslInteger);
          if( 0 == getLiquidClass.Open(i_str_ExportFilePath + " " + "Report", hslAppend, str_SQL_Count) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_ExportFilePath, "HxMetEdCompCmd");
          }
          arr_UniqueLiquidClassVolume.SetSize(0);
          arr_LiquidClass.SetSize(0);
          arr_Volume.SetSize(0);
          {
            while (
               (getLiquidClass.Eof() == 0)
            )
            {
              if( 0 == getLiquidClass.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              str_LiquidClassVolume = StrConcat4(str_LiquidClass, Translate("_"), flt_AspVolume, Translate(""));
              arr_UniqueLiquidClassVolume.AddAsLast(str_LiquidClassVolume);
              arr_LiquidClass.AddAsLast(str_LiquidClass);
              arr_Volume.AddAsLast(flt_DispVolume);
            }
          }
          if( 0 != getLiquidClass.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          getLiquidClass.RemoveFields();
          int_TotalLiquidClasses=arr_UniqueLiquidClassVolume.GetSize();
          {
            for(a = 0; a < int_TotalLiquidClasses;)
            {
              a = a + 1;
              str_LiquidClass=arr_LiquidClass.GetAt(a-1);
              flt_DispVolume=arr_Volume.GetAt(a-1);
              str_DispVolume = StrConcat2(flt_DispVolume, Translate(""));
              str_DispVolume = StrTrimRight(str_DispVolume, Translate("0"));
              int_Check = StrRight(str_DispVolume, 1);
              if (int_Check == ".")
              {
                StrReplace(str_DispVolume, Translate("."), Translate(".0"));
              }
              str_SQL_Filter = StrConcat12(Translate("SELECT * FROM [Report$]  WHERE [Disp Rack BC] = '"), str_CurrentTransferName, Translate("' AND [Liquid Class] = '"), str_LiquidClass, Translate("' AND [Disp Volume] = '"), str_DispVolume, Translate("'"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
              if(0){
                Trace("");
                Trace(str_SQL_Filter);
                Trace("");
              }
              readReportFile.SetExtendedProperties( "IMEX=1");
              readReportFile.AddField("Transfer Name", xls_TransferName, hslString, 255);
              readReportFile.AddField("Channel Used", xls_chan_use, hslString, 255);
              readReportFile.AddField("Asp Rack BC", xls_BC_Rack_Asp, hslString, 255);
              readReportFile.AddField("Asp Container BC", xls_BC_Cont_Asp, hslString, 255);
              readReportFile.AddField("Asp LabID", xls_LabID_asp, hslString, 255);
              readReportFile.AddField("Asp PosID", xls_PosID_asp, hslString, 255);
              readReportFile.AddField("Asp Volume", xls_vol_asp, hslString, 255);
              readReportFile.AddField("Asp Status", xls_Status_asp, hslString, 255);
              readReportFile.AddField("Asp Recovery", xls_Recov_asp, hslString, 255);
              readReportFile.AddField("Disp Rack BC", xls_BC_Rack_Disp, hslString, 255);
              readReportFile.AddField("Disp Container BC", xls_BC_Cont_Disp, hslString, 255);
              readReportFile.AddField("Disp LabID", xls_LabID_disp, hslString, 255);
              readReportFile.AddField("Disp PosID", xls_PosID_disp, hslString, 255);
              readReportFile.AddField("Disp Volume", xls_vol_disp, hslString, 255);
              readReportFile.AddField("Disp Status", xls_Status_disp, hslString, 255);
              readReportFile.AddField("Disp Recovery", xls_Recov_disp, hslString, 255);
              readReportFile.AddField("Liquid Class", xls_LiquidClass, hslString, 255);
              readReportFile.AddField("Step Number Asp", str_StepNum_Asp, hslString, 255);
              readReportFile.AddField("Step Number Disp", str_StepNum_Disp, hslString, 255);
              readReportFile.AddField("TADM Curve ID Asp", str_TADM_CurveID_Asp, hslString, 255);
              readReportFile.AddField("TADM Curve ID Disp", str_TADM_CurveID_Disp, hslString, 255);
              readReportFile.AddField("TADM Time Stamp Asp", str_TADM_Time_Asp, hslString, 255);
              readReportFile.AddField("TADM Time Stamp Disp", str_TADM_Time_Disp, hslString, 255);
              readReportFile.AddField("TADM Mode", str_TADM_Mode, hslString, 255);
              if( 0 == readReportFile.Open(i_str_ExportFilePath + " " + "Report", hslRead, str_SQL_Filter) )
              {
                    MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_ExportFilePath, "HxMetEdCompCmd");
              }
              arr_CurveIDs.SetSize(0);
              {
                while (
                   (readReportFile.Eof() == 0)
                )
                {
                  if( 0 == readReportFile.ReadRecord() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  if (str_TADM_CurveID_Disp != "-----")
                  {
                    int_TADM_CurveID_Disp = StrIVal(str_TADM_CurveID_Disp);
                    arr_CurveIDs.AddAsLast(int_TADM_CurveID_Disp);
                  }
                }
              }
              if( 0 != readReportFile.Close() )
              {
                    MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              readReportFile.RemoveFields();
              if(0){
                Util2::Debug::TraceArray(Translate("Curve IDs"), arr_CurveIDs);
              }
              _ExportTADMCurve(i_str_ExportFilePath, str_CurrentTransferName, arr_CurveIDs, 0, int_CurveCount);
            }
          }
        }
      }
    }
  }

  function TransferReport_MPH96( device & Instrument, variable i_str_ReportFilePath, variable i_str_AspReturnValue3, variable i_str_AspReturnValue4, variable i_str_DispReturnValue3, variable i_str_DispReturnValue4, variable i_str_LiquidClass, variable i_str_NameForTransfer ) void {
    private variable ReadTADM_Error;
    private variable ReadTADM_StepGuid;
    private variable ReadTADM_TimeStamp;
    private variable xls_PosID_asp;
    private variable xls_BC_Rack_Asp;
    private variable xls_Recov_asp;
    private variable xls_BC_Cont_Asp;
    private variable ReadTADM_TadmMode;
    private variable ReadTADM_ChannelNumber;
    private variable ReadTADM_StepType;
    private variable numberOfReturnPosAspirate;
    private variable xls_BC_Rack_Disp;
    private variable xls_LabID_asp;
    private variable xls_BC_Cont_Disp;
    private variable lengthVolDisp;
    private variable str_TADM_CurveID_Disp;
    private variable ReadTADM_StepNumber;
    private variable str_TADM_Mode;
    private variable str_TADM_Time_Disp;
    private variable str_StepNum_Asp;
    private variable str_TADM_CurveID_Asp;
    private variable xls_chan_use;
    private variable str_StepNum_Disp;
    private variable str_TADM_Time_Asp;
    private variable xls_Status_asp;
    private variable int_length;
    private variable int_EntryFound;
    private variable xls_vol_disp;
    private variable ReadTADM_LiquidClassName;
    private variable lengthLabIDDisp;
    private variable str_SQL_Count;
    private variable xls_Recov_disp;
    private variable xls_int_Recov_disp;
    private variable ReadTADM_Volume;
    private variable lengthVolAsp;
    private variable lengthLabIDAsp;
    private variable bool_FileExists;
    private variable str_TADM_FilePath;
    private variable xls_LabID_disp;
    private variable numberOfReturnPosDispense;
    private variable ReadTADM_CurveId;
    private variable loopCounter1;
    private variable ReadTADM_CheckSum;
    private variable ReadTADM_CurveFlagged;
    private variable ReadTADM_ToleranceBandGuid;
    private variable str_SQL_Sort;
    private variable xls_Status_disp;
    private variable xls_vol_asp;
    private variable xls_int_Recov_asp;
    private variable xls_PosID_disp;
    private sequence seq_DispBCGet;
    private sequence seq_AspBCGet;
    private file ReadTADM;
    private file writeReportFile;
    private variable int_IndexPosition;
    private variable length;
    private variable lengthVolumeAsp;
    StrReplace(i_str_NameForTransfer, Translate(" "), Translate("_"));
    _Get_TADM_FileName(str_TADM_FilePath);
    writeReportFile.AddField("Transfer Name", i_str_NameForTransfer, hslString, 255);
    writeReportFile.AddField("Channel Used", xls_chan_use, hslString, 255);
    writeReportFile.AddField("Asp Rack BC", xls_BC_Rack_Asp, hslString, 255);
    writeReportFile.AddField("Asp Container BC", xls_BC_Cont_Asp, hslString, 255);
    writeReportFile.AddField("Asp LabID", xls_LabID_asp, hslString, 255);
    writeReportFile.AddField("Asp PosID", xls_PosID_asp, hslString, 255);
    writeReportFile.AddField("Asp Volume", xls_vol_asp, hslString, 255);
    writeReportFile.AddField("Asp Status", xls_Status_asp, hslString, 255);
    writeReportFile.AddField("Asp Recovery", xls_Recov_asp, hslString, 255);
    writeReportFile.AddField("Disp Rack BC", xls_BC_Rack_Disp, hslString, 255);
    writeReportFile.AddField("Disp Container BC", xls_BC_Cont_Disp, hslString, 255);
    writeReportFile.AddField("Disp LabID", xls_LabID_disp, hslString, 255);
    writeReportFile.AddField("Disp PosID", xls_PosID_disp, hslString, 255);
    writeReportFile.AddField("Disp Volume", xls_vol_disp, hslString, 255);
    writeReportFile.AddField("Disp Status", xls_Status_disp, hslString, 255);
    writeReportFile.AddField("Disp Recovery", xls_Recov_disp, hslString, 255);
    writeReportFile.AddField("Liquid Class", i_str_LiquidClass, hslString, 255);
    writeReportFile.AddField("Step Number Asp", str_StepNum_Asp, hslString, 255);
    writeReportFile.AddField("Step Number Disp", str_StepNum_Disp, hslString, 255);
    writeReportFile.AddField("TADM Curve ID Asp", str_TADM_CurveID_Asp, hslString, 255);
    writeReportFile.AddField("TADM Curve ID Disp", str_TADM_CurveID_Disp, hslString, 255);
    writeReportFile.AddField("TADM Time Stamp Asp", str_TADM_Time_Asp, hslString, 255);
    writeReportFile.AddField("TADM Time Stamp Disp", str_TADM_Time_Disp, hslString, 255);
    writeReportFile.AddField("TADM Mode", str_TADM_Mode, hslString, 255);
    if( 0 == writeReportFile.Open(i_str_ReportFilePath + " " + "Report", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_ReportFilePath, "HxMetEdCompCmd");
    }
    numberOfReturnPosAspirate = StepReturn::GetNumberOfPositions(i_str_AspReturnValue4);
    numberOfReturnPosDispense = StepReturn::GetNumberOfPositions(i_str_DispReturnValue4);
    xls_chan_use = Translate("-----");
    xls_BC_Rack_Asp = Translate("-----");
    xls_BC_Cont_Asp = Translate("-----");
    xls_LabID_asp = Translate("-----");
    xls_PosID_asp = Translate("-----");
    xls_vol_asp = Translate("-----");
    xls_Status_asp = Translate("-----");
    xls_Recov_asp = Translate("-----");
    xls_BC_Rack_Disp = Translate("-----");
    xls_BC_Cont_Disp = Translate("-----");
    xls_LabID_disp = Translate("-----");
    xls_PosID_disp = Translate("-----");
    xls_vol_disp = Translate("-----");
    xls_Status_disp = Translate("-----");
    xls_Recov_disp = Translate("-----");
    str_TADM_CurveID_Asp = Translate("-----");
    str_TADM_CurveID_Disp = Translate("-----");
    str_TADM_Mode = Translate("-----");
    str_TADM_Time_Asp = Translate("-----");
    str_TADM_Time_Disp = Translate("-----");
    str_StepNum_Asp = Translate("-----");
    str_StepNum_Disp = Translate("-----");
    xls_LabID_asp = StepReturn::GetLabwareId(1, i_str_AspReturnValue3);
    xls_Status_asp = StepReturn::GetMainError(1, i_str_AspReturnValue3);
    xls_vol_asp = StepReturn::GetStepData(1, i_str_AspReturnValue3);
    xls_int_Recov_asp = StepReturn::GetRecoveryButton(1, i_str_AspReturnValue3);
    xls_LabID_disp = StepReturn::GetLabwareId(1, i_str_DispReturnValue3);
    xls_Status_disp = StepReturn::GetMainError(1, i_str_DispReturnValue3);
    xls_vol_disp = StepReturn::GetStepData(1, i_str_DispReturnValue3);
    xls_int_Recov_disp = StepReturn::GetRecoveryButton(1, i_str_DispReturnValue3);
    _Asp_Error_Codes(xls_Status_asp, xls_Status_asp);
    _Recovery_Codes(xls_int_Recov_asp, xls_Recov_asp);
    _Disp_Error_Codes(xls_Status_disp, xls_Status_disp);
    _Recovery_Codes(xls_int_Recov_disp, xls_Recov_disp);
    onerror goto errLabel_6 ;
    err.Clear();
    SeqRemoveAll(seq_AspBCGet);
    SeqAdd(seq_AspBCGet, xls_LabID_asp, xls_PosID_asp);
    seq_AspBCGet.SetCurrentPosition(1);
    xls_BC_Rack_Asp = HSLLabwState::GetLabwareBarcode(Instrument, seq_AspBCGet, 300);
    int_length = StrGetLength(xls_BC_Rack_Asp);
    if (int_length == 0)
    {
      xls_BC_Rack_Asp = Translate("-----");
    }
    errLabel_6 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      xls_BC_Rack_Asp = Translate("-----");
    }   /* end if from skip handler if no error */
    onerror goto errLabel_7 ;
    err.Clear();
    SeqRemoveAll(seq_DispBCGet);
    SeqAdd(seq_DispBCGet, xls_LabID_disp, xls_PosID_disp);
    seq_DispBCGet.SetCurrentPosition(1);
    xls_BC_Rack_Disp = HSLLabwState::GetLabwareBarcode(Instrument, seq_DispBCGet, 300);
    int_length = StrGetLength(xls_BC_Rack_Disp);
    if (int_length == 0)
    {
      xls_BC_Rack_Disp = Translate("-----");
    }
    errLabel_7 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      xls_BC_Rack_Disp = Translate("-----");
    }   /* end if from skip handler if no error */
    {
      for(loopCounter1 = 0; loopCounter1 < numberOfReturnPosAspirate;)
      {
        loopCounter1 = loopCounter1 + 1;
        int_IndexPosition = loopCounter1 - 0;
        xls_chan_use = Translate("-----");
        if(0){
          xls_BC_Rack_Asp = Translate("-----");
        }
        xls_BC_Cont_Asp = Translate("-----");
        if(0){
          xls_LabID_asp = Translate("-----");
        }
        xls_PosID_asp = Translate("-----");
        if(0){
          xls_vol_asp = Translate("-----");
          xls_Status_asp = Translate("-----");
          xls_Recov_asp = Translate("-----");
          xls_BC_Rack_Disp = Translate("-----");
        }
        xls_BC_Cont_Disp = Translate("-----");
        if(0){
          xls_LabID_disp = Translate("-----");
        }
        xls_PosID_disp = Translate("-----");
        if(0){
          xls_vol_disp = Translate("-----");
          xls_Status_disp = Translate("-----");
          xls_Recov_disp = Translate("-----");
        }
        str_TADM_CurveID_Asp = Translate("-----");
        str_TADM_CurveID_Disp = Translate("-----");
        str_TADM_Mode = Translate("-----");
        str_TADM_Time_Asp = Translate("-----");
        str_TADM_Time_Disp = Translate("-----");
        str_StepNum_Asp = Translate("-----");
        str_StepNum_Disp = Translate("-----");
        xls_PosID_asp = StepReturn::GetBarcodePosition(int_IndexPosition, i_str_AspReturnValue4);
        xls_chan_use = StepReturn::GetPosition(int_IndexPosition, i_str_AspReturnValue4);
        lengthLabIDAsp = StrGetLength(xls_LabID_asp);
        lengthVolumeAsp = StrGetLength(xls_vol_asp);
        if (lengthLabIDAsp != 0)
        {
          if (lengthVolumeAsp != 0)
          {
            onerror goto errLabel_8 ;
            err.Clear();
            SeqRemoveAll(seq_AspBCGet);
            SeqAdd(seq_AspBCGet, xls_LabID_asp, xls_PosID_asp);
            seq_AspBCGet.SetCurrentPosition(1);
            xls_BC_Cont_Asp = HSLLabwState::GetLabwareBarcode(Instrument, seq_AspBCGet, 400);
            int_length = StrGetLength(xls_BC_Cont_Asp);
            if (int_length == 0)
            {
              xls_BC_Cont_Asp = Translate("-----");
            }
            errLabel_8 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              xls_BC_Cont_Asp = Translate("-----");
            }   /* end if from skip handler if no error */
            if (xls_int_Recov_asp != 5)
            {
              lengthVolAsp = StrGetLength(xls_vol_asp);
              if (lengthVolAsp > 0)
              {
                bool_FileExists = HSLExtensions::File::Exists(str_TADM_FilePath);
                if (bool_FileExists == 1)
                {
                  str_SQL_Count = StrConcat8(Translate("SELECT COUNT(*) AS N FROM [TadmCurve] WHERE [LiquidClassName] = '"), i_str_LiquidClass, Translate("' AND [ChannelNumber] = "), xls_chan_use, Translate(" AND [Volume] = "), xls_vol_asp, Translate(" AND [StepType] = -533331728"), Translate(""));
                  ReadTADM.AddField("N", int_EntryFound, hslInteger);
                  if( 0 == ReadTADM.Open(str_TADM_FilePath + " " + "TadmCurve", hslRead, str_SQL_Count) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_TADM_FilePath, "HxMetEdCompCmd");
                  }
                  if( 0 == ReadTADM.ReadRecord() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  if( 0 != ReadTADM.Close() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  ReadTADM.RemoveFields();
                  if (int_EntryFound > 0)
                  {
                    str_SQL_Sort = StrConcat8(Translate("SELECT * FROM [TadmCurve] WHERE [LiquidClassName] = '"), i_str_LiquidClass, Translate("' AND [ChannelNumber] = "), xls_chan_use, Translate(" AND [Volume] = "), xls_vol_asp, Translate(" AND [StepType] = -533331728"), Translate(" ORDER BY [CurveId] DESC"));
                    ReadTADM.AddField("CurveId", ReadTADM_CurveId, hslInteger);
                    ReadTADM.AddField("LiquidClassName", ReadTADM_LiquidClassName, hslString, 100);
                    ReadTADM.AddField("StepType", ReadTADM_StepType, hslInteger);
                    ReadTADM.AddField("Volume", ReadTADM_Volume, hslFloat);
                    ReadTADM.AddField("TimeStamp", ReadTADM_TimeStamp, hslString, 8);
                    ReadTADM.AddField("StepGuid", ReadTADM_StepGuid, hslString, 36);
                    ReadTADM.AddField("ToleranceBandGuid", ReadTADM_ToleranceBandGuid, hslString, 36);
                    ReadTADM.AddField("StepNumber", ReadTADM_StepNumber, hslInteger);
                    ReadTADM.AddField("Error", ReadTADM_Error, hslInteger);
                    ReadTADM.AddField("ChannelNumber", ReadTADM_ChannelNumber, hslInteger);
                    ReadTADM.AddField("TadmMode", ReadTADM_TadmMode, hslInteger);
                    ReadTADM.AddField("CurveFlagged", ReadTADM_CurveFlagged, hslInteger);
                    ReadTADM.AddField("CheckSum", ReadTADM_CheckSum, hslInteger);
                    if( 0 == ReadTADM.Open(str_TADM_FilePath + " " + "TadmCurve", hslRead, str_SQL_Sort) )
                    {
                          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_TADM_FilePath, "HxMetEdCompCmd");
                    }
                    if( 0 == ReadTADM.ReadRecord() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    if( 0 != ReadTADM.Close() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    ReadTADM.RemoveFields();
                    str_TADM_CurveID_Asp = StrConcat2(ReadTADM_CurveId, Translate(""));
                    str_TADM_Mode = StrConcat2(ReadTADM_TadmMode, Translate(""));
                    str_TADM_Time_Asp = StrConcat2(ReadTADM_TimeStamp, Translate(""));
                    str_StepNum_Asp = StrConcat2(ReadTADM_StepNumber, Translate(""));
                  }
                }
              }
              else
              {
                xls_vol_asp = Translate("-----");
              }
            }
            xls_PosID_disp = StepReturn::GetBarcodePosition(int_IndexPosition, i_str_DispReturnValue4);
            length = StrGetLength(xls_LabID_disp);
            if (length == 0)
            {
              xls_LabID_disp = Translate("-----");
            }
            length = StrGetLength(xls_PosID_disp);
            if (length == 0)
            {
              xls_PosID_disp = Translate("-----");
            }
            length = StrGetLength(xls_vol_disp);
            if (length == 0)
            {
              xls_vol_disp = Translate("-----");
            }
            lengthLabIDDisp = StrGetLength(xls_LabID_disp);
            if (xls_LabID_disp != "-----")
            {
              if (lengthLabIDDisp != 0)
              {
                onerror goto errLabel_9 ;
                err.Clear();
                SeqRemoveAll(seq_DispBCGet);
                SeqAdd(seq_DispBCGet, xls_LabID_disp, xls_PosID_disp);
                seq_DispBCGet.SetCurrentPosition(1);
                xls_BC_Cont_Disp = HSLLabwState::GetLabwareBarcode(Instrument, seq_DispBCGet, 400);
                int_length = StrGetLength(xls_BC_Cont_Disp);
                if (int_length == 0)
                {
                  xls_BC_Cont_Disp = Translate("-----");
                }
                errLabel_9 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  xls_BC_Cont_Disp = Translate("-----");
                }   /* end if from skip handler if no error */
                if (xls_int_Recov_disp != 5)
                {
                  lengthVolDisp = StrGetLength(xls_vol_disp);
                  if (lengthVolDisp > 0)
                  {
                    bool_FileExists = HSLExtensions::File::Exists(str_TADM_FilePath);
                    if (bool_FileExists == 1)
                    {
                      str_SQL_Count = StrConcat8(Translate("SELECT COUNT(*) AS N FROM [TadmCurve] WHERE [LiquidClassName] = '"), i_str_LiquidClass, Translate("' AND [ChannelNumber] = "), xls_chan_use, Translate(" AND [Volume] = "), xls_vol_disp, Translate(" AND [StepType] = -533331727"), Translate(""));
                      ReadTADM.AddField("N", int_EntryFound, hslInteger);
                      if( 0 == ReadTADM.Open(str_TADM_FilePath + " " + "TadmCurve", hslRead, str_SQL_Count) )
                      {
                            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_TADM_FilePath, "HxMetEdCompCmd");
                      }
                      if( 0 == ReadTADM.ReadRecord() )
                      {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      if( 0 != ReadTADM.Close() )
                      {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      ReadTADM.RemoveFields();
                      if (int_EntryFound > 0)
                      {
                        str_SQL_Sort = StrConcat8(Translate("SELECT * FROM [TadmCurve] WHERE [LiquidClassName] = '"), i_str_LiquidClass, Translate("' AND [ChannelNumber] = "), xls_chan_use, Translate(" AND [Volume] = "), xls_vol_disp, Translate(" AND [StepType] = -533331727"), Translate(" ORDER BY [CurveId] DESC"));
                        ReadTADM.AddField("CurveId", ReadTADM_CurveId, hslInteger);
                        ReadTADM.AddField("LiquidClassName", ReadTADM_LiquidClassName, hslString, 100);
                        ReadTADM.AddField("StepType", ReadTADM_StepType, hslInteger);
                        ReadTADM.AddField("Volume", ReadTADM_Volume, hslFloat);
                        ReadTADM.AddField("TimeStamp", ReadTADM_TimeStamp, hslString, 8);
                        ReadTADM.AddField("StepGuid", ReadTADM_StepGuid, hslString, 36);
                        ReadTADM.AddField("ToleranceBandGuid", ReadTADM_ToleranceBandGuid, hslString, 36);
                        ReadTADM.AddField("StepNumber", ReadTADM_StepNumber, hslInteger);
                        ReadTADM.AddField("Error", ReadTADM_Error, hslInteger);
                        ReadTADM.AddField("ChannelNumber", ReadTADM_ChannelNumber, hslInteger);
                        ReadTADM.AddField("TadmMode", ReadTADM_TadmMode, hslInteger);
                        ReadTADM.AddField("CurveFlagged", ReadTADM_CurveFlagged, hslInteger);
                        ReadTADM.AddField("CheckSum", ReadTADM_CheckSum, hslInteger);
                        if( 0 == ReadTADM.Open(str_TADM_FilePath + " " + "TadmCurve", hslRead, str_SQL_Sort) )
                        {
                            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_TADM_FilePath, "HxMetEdCompCmd");
                        }
                        if( 0 == ReadTADM.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if( 0 != ReadTADM.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        ReadTADM.RemoveFields();
                        str_TADM_CurveID_Disp = StrConcat2(ReadTADM_CurveId, Translate(""));
                        str_TADM_Mode = StrConcat2(ReadTADM_TadmMode, Translate(""));
                        str_TADM_Time_Disp = StrConcat2(ReadTADM_TimeStamp, Translate(""));
                        str_StepNum_Disp = StrConcat2(ReadTADM_StepNumber, Translate(""));
                      }
                    }
                  }
                  else
                  {
                    xls_vol_disp = Translate("-----");
                  }
                }
              }
              if( 0 == writeReportFile.WriteRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
          }
        }
      }
    }
    if( 0 != writeReportFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    writeReportFile.RemoveFields();
  }

  function TransferReport_MoveBarcodes( device & Instrument, variable i_str_ReportFilePath, variable i_str_AspReturnValue, variable i_str_DispReturnValue, variable i_str_LiquidClass, variable i_str_NameForTransfer ) void {
    private variable ReadTADM_Error;
    private variable ReadTADM_StepGuid;
    private variable xls_PosID_asp;
    private variable ReadTADM_TimeStamp;
    private variable xls_BC_Rack_Asp;
    private variable xls_BC_Cont_Asp;
    private variable xls_Recov_asp;
    private variable numberOfReturnPosAspirate;
    private variable xls_BC_Rack_Disp;
    private variable lengthVolDisp;
    private variable str_TADM_CurveID_Disp;
    private variable ReadTADM_TadmMode;
    private variable ReadTADM_ChannelNumber;
    private variable ReadTADM_StepType;
    private variable xls_BC_Cont_Disp;
    private variable xls_LabID_asp;
    private variable str_StepNum_Asp;
    private variable str_TADM_Mode;
    private variable ReadTADM_StepNumber;
    private variable str_TADM_Time_Disp;
    private variable str_TADM_CurveID_Asp;
    private variable xls_chan_use;
    private variable str_StepNum_Disp;
    private variable int_length;
    private variable xls_Status_asp;
    private variable str_TADM_Time_Asp;
    private variable int_EntryFound;
    private variable xls_vol_disp;
    private variable lengthLabIDDisp;
    private variable ReadTADM_LiquidClassName;
    private variable str_SQL_Count;
    private variable xls_Recov_disp;
    private variable xls_int_Recov_disp;
    private variable xls_LabID_disp;
    private variable ReadTADM_Volume;
    private variable str_TADM_FilePath;
    private variable bool_FileExists;
    private variable lengthVolAsp;
    private variable lengthLabIDAsp;
    private variable numberOfReturnPosDispense;
    private variable ReadTADM_CurveId;
    private variable loopCounter1;
    private variable ReadTADM_CheckSum;
    private variable ReadTADM_CurveFlagged;
    private variable ReadTADM_ToleranceBandGuid;
    private variable xls_Status_disp;
    private variable str_SQL_Sort;
    private variable xls_vol_asp;
    private variable xls_int_Recov_asp;
    private variable xls_PosID_disp;
    private variable stringPos;
    private sequence seq_DispBCGet;
    private sequence seq_AspBCGet;
    private file ReadTADM;
    private file writeReportFile;
    private variable length;
    private variable lengthVolumeAsp;
    StrReplace(i_str_NameForTransfer, Translate(" "), Translate("_"));
    _Get_TADM_FileName(str_TADM_FilePath);
    writeReportFile.AddField("Transfer Name", i_str_NameForTransfer, hslString, 255);
    writeReportFile.AddField("Channel Used", xls_chan_use, hslString, 255);
    writeReportFile.AddField("Asp Rack BC", xls_BC_Rack_Asp, hslString, 255);
    writeReportFile.AddField("Asp Container BC", xls_BC_Cont_Asp, hslString, 255);
    writeReportFile.AddField("Asp LabID", xls_LabID_asp, hslString, 255);
    writeReportFile.AddField("Asp PosID", xls_PosID_asp, hslString, 255);
    writeReportFile.AddField("Asp Volume", xls_vol_asp, hslString, 255);
    writeReportFile.AddField("Asp Status", xls_Status_asp, hslString, 255);
    writeReportFile.AddField("Asp Recovery", xls_Recov_asp, hslString, 255);
    writeReportFile.AddField("Disp Rack BC", xls_BC_Rack_Disp, hslString, 255);
    writeReportFile.AddField("Disp Container BC", xls_BC_Cont_Disp, hslString, 255);
    writeReportFile.AddField("Disp LabID", xls_LabID_disp, hslString, 255);
    writeReportFile.AddField("Disp PosID", xls_PosID_disp, hslString, 255);
    writeReportFile.AddField("Disp Volume", xls_vol_disp, hslString, 255);
    writeReportFile.AddField("Disp Status", xls_Status_disp, hslString, 255);
    writeReportFile.AddField("Disp Recovery", xls_Recov_disp, hslString, 255);
    writeReportFile.AddField("Liquid Class", i_str_LiquidClass, hslString, 255);
    writeReportFile.AddField("Step Number Asp", str_StepNum_Asp, hslString, 255);
    writeReportFile.AddField("Step Number Disp", str_StepNum_Disp, hslString, 255);
    writeReportFile.AddField("TADM Curve ID Asp", str_TADM_CurveID_Asp, hslString, 255);
    writeReportFile.AddField("TADM Curve ID Disp", str_TADM_CurveID_Disp, hslString, 255);
    writeReportFile.AddField("TADM Time Stamp Asp", str_TADM_Time_Asp, hslString, 255);
    writeReportFile.AddField("TADM Time Stamp Disp", str_TADM_Time_Disp, hslString, 255);
    writeReportFile.AddField("TADM Mode", str_TADM_Mode, hslString, 255);
    if( 0 == writeReportFile.Open(i_str_ReportFilePath + " " + "Report", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_ReportFilePath, "HxMetEdCompCmd");
    }
    numberOfReturnPosAspirate = StepReturn::GetNumberOfPositions(i_str_AspReturnValue);
    numberOfReturnPosDispense = StepReturn::GetNumberOfPositions(i_str_DispReturnValue);
    {
      for(loopCounter1 = 0; loopCounter1 < numberOfReturnPosAspirate;)
      {
        loopCounter1 = loopCounter1 + 1;
        xls_chan_use = Translate("-----");
        xls_BC_Rack_Asp = Translate("-----");
        xls_BC_Cont_Asp = Translate("-----");
        xls_LabID_asp = Translate("-----");
        xls_PosID_asp = Translate("-----");
        xls_vol_asp = Translate("-----");
        xls_Status_asp = Translate("-----");
        xls_Recov_asp = Translate("-----");
        xls_BC_Rack_Disp = Translate("-----");
        xls_BC_Cont_Disp = Translate("-----");
        xls_LabID_disp = Translate("-----");
        xls_PosID_disp = Translate("-----");
        xls_vol_disp = Translate("-----");
        xls_Status_disp = Translate("-----");
        xls_Recov_disp = Translate("-----");
        str_TADM_CurveID_Asp = Translate("-----");
        str_TADM_CurveID_Disp = Translate("-----");
        str_TADM_Mode = Translate("-----");
        str_TADM_Time_Asp = Translate("-----");
        str_TADM_Time_Disp = Translate("-----");
        str_StepNum_Asp = Translate("-----");
        str_StepNum_Disp = Translate("-----");
        stringPos = StepReturn::GetPositionFromNum(loopCounter1, i_str_AspReturnValue);
        xls_LabID_asp = StepReturn::GetLabwareId(stringPos, i_str_AspReturnValue);
        xls_PosID_asp = StepReturn::GetPositionId(stringPos, i_str_AspReturnValue);
        xls_Status_asp = StepReturn::GetMainError(stringPos, i_str_AspReturnValue);
        xls_vol_asp = StepReturn::GetStepData(stringPos, i_str_AspReturnValue);
        xls_int_Recov_asp = StepReturn::GetRecoveryButton(stringPos, i_str_AspReturnValue);
        xls_chan_use = StepReturn::GetPosition(stringPos, i_str_AspReturnValue);
        lengthLabIDAsp = StrGetLength(xls_LabID_asp);
        lengthVolumeAsp = StrGetLength(xls_vol_asp);
        if (lengthLabIDAsp != 0)
        {
          if (lengthVolumeAsp != 0)
          {
            _Asp_Error_Codes(xls_Status_asp, xls_Status_asp);
            _Recovery_Codes(xls_int_Recov_asp, xls_Recov_asp);
            onerror goto errLabel_10 ;
            err.Clear();
            SeqRemoveAll(seq_AspBCGet);
            SeqAdd(seq_AspBCGet, xls_LabID_asp, xls_PosID_asp);
            seq_AspBCGet.SetCurrentPosition(1);
            xls_BC_Rack_Asp = HSLLabwState::GetLabwareBarcode(Instrument, seq_AspBCGet, 300);
            int_length = StrGetLength(xls_BC_Rack_Asp);
            if (int_length == 0)
            {
              xls_BC_Rack_Asp = Translate("-----");
            }
            errLabel_10 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              xls_BC_Rack_Asp = Translate("-----");
            }   /* end if from skip handler if no error */
            onerror goto errLabel_11 ;
            err.Clear();
            xls_BC_Cont_Asp = HSLLabwState::GetLabwareBarcode(Instrument, seq_AspBCGet, 400);
            int_length = StrGetLength(xls_BC_Cont_Asp);
            if (int_length == 0)
            {
              xls_BC_Cont_Asp = Translate("-----");
            }
            errLabel_11 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              xls_BC_Cont_Asp = Translate("-----");
            }   /* end if from skip handler if no error */
            if (xls_int_Recov_asp != 5)
            {
              lengthVolAsp = StrGetLength(xls_vol_asp);
              if (lengthVolAsp > 0)
              {
                bool_FileExists = HSLExtensions::File::Exists(str_TADM_FilePath);
                if (bool_FileExists == 1)
                {
                  str_SQL_Count = StrConcat8(Translate("SELECT COUNT(*) AS N FROM [TadmCurve] WHERE [LiquidClassName] = '"), i_str_LiquidClass, Translate("' AND [ChannelNumber] = "), xls_chan_use, Translate(" AND [Volume] = "), xls_vol_asp, Translate(" AND [StepType] = -533331728"), Translate(""));
                  ReadTADM.AddField("N", int_EntryFound, hslInteger);
                  if( 0 == ReadTADM.Open(str_TADM_FilePath + " " + "TadmCurve", hslRead, str_SQL_Count) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_TADM_FilePath, "HxMetEdCompCmd");
                  }
                  if( 0 == ReadTADM.ReadRecord() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  if( 0 != ReadTADM.Close() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  ReadTADM.RemoveFields();
                  if (int_EntryFound > 0)
                  {
                    if(0){
                      str_SQL_Sort = StrConcat8(Translate("SELECT * FROM [TadmCurve] WHERE [LiquidClassName] = '"), i_str_LiquidClass, Translate("' AND [ChannelNumber] = "), xls_chan_use, Translate(" AND [StepType] = -533331728"), Translate(" ORDER BY [CurveId] DESC"), Translate(""), Translate(""));
                    }
                    str_SQL_Sort = StrConcat8(Translate("SELECT * FROM [TadmCurve] WHERE [LiquidClassName] = '"), i_str_LiquidClass, Translate("' AND [ChannelNumber] = "), xls_chan_use, Translate(" AND [Volume] = "), xls_vol_asp, Translate(" AND [StepType] = -533331728"), Translate(" ORDER BY [CurveId] DESC"));
                    ReadTADM.AddField("CurveId", ReadTADM_CurveId, hslInteger);
                    ReadTADM.AddField("LiquidClassName", ReadTADM_LiquidClassName, hslString, 100);
                    ReadTADM.AddField("StepType", ReadTADM_StepType, hslInteger);
                    ReadTADM.AddField("Volume", ReadTADM_Volume, hslFloat);
                    ReadTADM.AddField("TimeStamp", ReadTADM_TimeStamp, hslString, 8);
                    ReadTADM.AddField("StepGuid", ReadTADM_StepGuid, hslString, 36);
                    ReadTADM.AddField("ToleranceBandGuid", ReadTADM_ToleranceBandGuid, hslString, 36);
                    ReadTADM.AddField("StepNumber", ReadTADM_StepNumber, hslInteger);
                    ReadTADM.AddField("Error", ReadTADM_Error, hslInteger);
                    ReadTADM.AddField("ChannelNumber", ReadTADM_ChannelNumber, hslInteger);
                    ReadTADM.AddField("TadmMode", ReadTADM_TadmMode, hslInteger);
                    ReadTADM.AddField("CurveFlagged", ReadTADM_CurveFlagged, hslInteger);
                    ReadTADM.AddField("CheckSum", ReadTADM_CheckSum, hslInteger);
                    if( 0 == ReadTADM.Open(str_TADM_FilePath + " " + "TadmCurve", hslRead, str_SQL_Sort) )
                    {
                          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_TADM_FilePath, "HxMetEdCompCmd");
                    }
                    if( 0 == ReadTADM.ReadRecord() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    if( 0 != ReadTADM.Close() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    ReadTADM.RemoveFields();
                    str_TADM_CurveID_Asp = StrConcat2(ReadTADM_CurveId, Translate(""));
                    str_TADM_Mode = StrConcat2(ReadTADM_TadmMode, Translate(""));
                    str_TADM_Time_Asp = StrConcat2(ReadTADM_TimeStamp, Translate(""));
                    str_StepNum_Asp = StrConcat2(ReadTADM_StepNumber, Translate(""));
                  }
                }
              }
              else
              {
                xls_vol_asp = Translate("-----");
              }
            }
            stringPos = StepReturn::GetPositionFromNum(loopCounter1, i_str_DispReturnValue);
            xls_LabID_disp = StepReturn::GetLabwareId(stringPos, i_str_DispReturnValue);
            xls_PosID_disp = StepReturn::GetPositionId(stringPos, i_str_DispReturnValue);
            xls_Status_disp = StepReturn::GetMainError(stringPos, i_str_DispReturnValue);
            xls_vol_disp = StepReturn::GetStepData(stringPos, i_str_DispReturnValue);
            xls_int_Recov_disp = StepReturn::GetRecoveryButton(stringPos, i_str_DispReturnValue);
            length = StrGetLength(xls_LabID_disp);
            if (length == 0)
            {
              xls_LabID_disp = Translate("-----");
            }
            length = StrGetLength(xls_PosID_disp);
            if (length == 0)
            {
              xls_PosID_disp = Translate("-----");
            }
            length = StrGetLength(xls_vol_disp);
            if (length == 0)
            {
              xls_vol_disp = Translate("-----");
            }
            _Disp_Error_Codes(xls_Status_disp, xls_Status_disp);
            _Recovery_Codes(xls_int_Recov_disp, xls_Recov_disp);
            lengthLabIDDisp = StrGetLength(xls_LabID_disp);
            if (xls_LabID_disp != "-----")
            {
              if (lengthLabIDDisp != 0)
              {
                SeqRemoveAll(seq_DispBCGet);
                SeqAdd(seq_DispBCGet, xls_LabID_disp, xls_PosID_disp);
                seq_DispBCGet.SetCurrentPosition(1);
                onerror goto errLabel_12 ;
                err.Clear();
                xls_BC_Rack_Disp = HSLLabwState::GetLabwareBarcode(Instrument, seq_DispBCGet, 300);
                int_length = StrGetLength(xls_BC_Rack_Disp);
                if (int_length == 0)
                {
                  xls_BC_Rack_Disp = Translate("-----");
                }
                errLabel_12 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  xls_BC_Rack_Disp = Translate("-----");
                }   /* end if from skip handler if no error */
                onerror goto errLabel_13 ;
                err.Clear();
                xls_BC_Cont_Disp = HSLLabwState::GetLabwareBarcode(Instrument, seq_DispBCGet, 400);
                int_length = StrGetLength(xls_BC_Cont_Disp);
                if (int_length == 0)
                {
                  xls_BC_Cont_Disp = Translate("-----");
                }
                errLabel_13 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  xls_BC_Cont_Disp = Translate("-----");
                }   /* end if from skip handler if no error */
                if (xls_int_Recov_disp != 5)
                {
                  lengthVolDisp = StrGetLength(xls_vol_disp);
                  if (lengthVolDisp > 0)
                  {
                    bool_FileExists = HSLExtensions::File::Exists(str_TADM_FilePath);
                    if (bool_FileExists == 1)
                    {
                      str_SQL_Count = StrConcat8(Translate("SELECT COUNT(*) AS N FROM [TadmCurve] WHERE [LiquidClassName] = '"), i_str_LiquidClass, Translate("' AND [ChannelNumber] = "), xls_chan_use, Translate(" AND [Volume] = "), xls_vol_disp, Translate(" AND [StepType] = -533331727"), Translate(""));
                      ReadTADM.AddField("N", int_EntryFound, hslInteger);
                      if( 0 == ReadTADM.Open(str_TADM_FilePath + " " + "TadmCurve", hslRead, str_SQL_Count) )
                      {
                            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_TADM_FilePath, "HxMetEdCompCmd");
                      }
                      if( 0 == ReadTADM.ReadRecord() )
                      {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      if( 0 != ReadTADM.Close() )
                      {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      ReadTADM.RemoveFields();
                      if (int_EntryFound > 0)
                      {
                        if(0){
                        str_SQL_Sort = StrConcat8(Translate("SELECT * FROM [TadmCurve] WHERE [LiquidClassName] = '"), i_str_LiquidClass, Translate("' AND [ChannelNumber] = "), xls_chan_use, Translate(" AND [StepType] = -533331727"), Translate(" ORDER BY [CurveId] DESC"), Translate(""), Translate(""));
                        }
                        str_SQL_Sort = StrConcat8(Translate("SELECT * FROM [TadmCurve] WHERE [LiquidClassName] = '"), i_str_LiquidClass, Translate("' AND [ChannelNumber] = "), xls_chan_use, Translate(" AND [Volume] = "), xls_vol_disp, Translate(" AND [StepType] = -533331727"), Translate(" ORDER BY [CurveId] DESC"));
                        ReadTADM.AddField("CurveId", ReadTADM_CurveId, hslInteger);
                        ReadTADM.AddField("LiquidClassName", ReadTADM_LiquidClassName, hslString, 100);
                        ReadTADM.AddField("StepType", ReadTADM_StepType, hslInteger);
                        ReadTADM.AddField("Volume", ReadTADM_Volume, hslFloat);
                        ReadTADM.AddField("TimeStamp", ReadTADM_TimeStamp, hslString, 8);
                        ReadTADM.AddField("StepGuid", ReadTADM_StepGuid, hslString, 36);
                        ReadTADM.AddField("ToleranceBandGuid", ReadTADM_ToleranceBandGuid, hslString, 36);
                        ReadTADM.AddField("StepNumber", ReadTADM_StepNumber, hslInteger);
                        ReadTADM.AddField("Error", ReadTADM_Error, hslInteger);
                        ReadTADM.AddField("ChannelNumber", ReadTADM_ChannelNumber, hslInteger);
                        ReadTADM.AddField("TadmMode", ReadTADM_TadmMode, hslInteger);
                        ReadTADM.AddField("CurveFlagged", ReadTADM_CurveFlagged, hslInteger);
                        ReadTADM.AddField("CheckSum", ReadTADM_CheckSum, hslInteger);
                        if( 0 == ReadTADM.Open(str_TADM_FilePath + " " + "TadmCurve", hslRead, str_SQL_Sort) )
                        {
                            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_TADM_FilePath, "HxMetEdCompCmd");
                        }
                        if( 0 == ReadTADM.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if( 0 != ReadTADM.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        ReadTADM.RemoveFields();
                        str_TADM_CurveID_Disp = StrConcat2(ReadTADM_CurveId, Translate(""));
                        str_TADM_Mode = StrConcat2(ReadTADM_TadmMode, Translate(""));
                        str_TADM_Time_Disp = StrConcat2(ReadTADM_TimeStamp, Translate(""));
                        str_StepNum_Disp = StrConcat2(ReadTADM_StepNumber, Translate(""));
                      }
                    }
                  }
                  else
                  {
                    xls_vol_disp = Translate("-----");
                  }
                }
              }
              if (xls_BC_Cont_Asp != "-----")
              {
                HSLMapReport::SetElementBarcode(Instrument, xls_LabID_disp, xls_PosID_disp, xls_BC_Cont_Asp);
              }
              if( 0 == writeReportFile.WriteRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
          }
        }
      }
    }
    if( 0 != writeReportFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    writeReportFile.RemoveFields();
  }

  function TransferReport_MPH96_MoveBarcodes( device & Instrument, variable i_str_ReportFilePath, variable i_str_AspReturnValue3, variable i_str_AspReturnValue4, variable i_str_DispReturnValue3, variable i_str_DispReturnValue4, variable i_str_LiquidClass, variable i_str_NameForTransfer ) void {
    private variable ReadTADM_Error;
    private variable ReadTADM_StepGuid;
    private variable ReadTADM_TimeStamp;
    private variable xls_PosID_asp;
    private variable xls_BC_Rack_Asp;
    private variable xls_Recov_asp;
    private variable xls_BC_Cont_Asp;
    private variable lengthVolDisp;
    private variable ReadTADM_ChannelNumber;
    private variable ReadTADM_StepType;
    private variable numberOfReturnPosAspirate;
    private variable str_TADM_CurveID_Disp;
    private variable xls_BC_Cont_Disp;
    private variable xls_LabID_asp;
    private variable xls_BC_Rack_Disp;
    private variable ReadTADM_TadmMode;
    private variable str_TADM_Time_Disp;
    private variable str_TADM_CurveID_Asp;
    private variable str_StepNum_Asp;
    private variable xls_chan_use;
    private variable str_TADM_Mode;
    private variable ReadTADM_StepNumber;
    private variable str_TADM_Time_Asp;
    private variable xls_Status_asp;
    private variable int_length;
    private variable str_StepNum_Disp;
    private variable int_EntryFound;
    private variable xls_vol_disp;
    private variable ReadTADM_LiquidClassName;
    private variable str_SQL_Count;
    private variable lengthLabIDDisp;
    private variable xls_int_Recov_disp;
    private variable xls_Recov_disp;
    private variable ReadTADM_Volume;
    private variable lengthLabIDAsp;
    private variable bool_FileExists;
    private variable str_TADM_FilePath;
    private variable xls_LabID_disp;
    private variable lengthVolAsp;
    private variable numberOfReturnPosDispense;
    private variable loopCounter1;
    private variable ReadTADM_CurveId;
    private variable int_IndexPosition;
    private variable ReadTADM_CheckSum;
    private variable ReadTADM_CurveFlagged;
    private variable ReadTADM_ToleranceBandGuid;
    private variable xls_Status_disp;
    private variable str_SQL_Sort;
    private variable xls_int_Recov_asp;
    private variable xls_vol_asp;
    private variable xls_PosID_disp;
    private sequence seq_DispBCGet;
    private sequence seq_AspBCGet;
    private file ReadTADM;
    private file writeReportFile;
    private variable length;
    private variable lengthVolumeAsp;
    StrReplace(i_str_NameForTransfer, Translate(" "), Translate("_"));
    _Get_TADM_FileName(str_TADM_FilePath);
    writeReportFile.AddField("Transfer Name", i_str_NameForTransfer, hslString, 255);
    writeReportFile.AddField("Channel Used", xls_chan_use, hslString, 255);
    writeReportFile.AddField("Asp Rack BC", xls_BC_Rack_Asp, hslString, 255);
    writeReportFile.AddField("Asp Container BC", xls_BC_Cont_Asp, hslString, 255);
    writeReportFile.AddField("Asp LabID", xls_LabID_asp, hslString, 255);
    writeReportFile.AddField("Asp PosID", xls_PosID_asp, hslString, 255);
    writeReportFile.AddField("Asp Volume", xls_vol_asp, hslString, 255);
    writeReportFile.AddField("Asp Status", xls_Status_asp, hslString, 255);
    writeReportFile.AddField("Asp Recovery", xls_Recov_asp, hslString, 255);
    writeReportFile.AddField("Disp Rack BC", xls_BC_Rack_Disp, hslString, 255);
    writeReportFile.AddField("Disp Container BC", xls_BC_Cont_Disp, hslString, 255);
    writeReportFile.AddField("Disp LabID", xls_LabID_disp, hslString, 255);
    writeReportFile.AddField("Disp PosID", xls_PosID_disp, hslString, 255);
    writeReportFile.AddField("Disp Volume", xls_vol_disp, hslString, 255);
    writeReportFile.AddField("Disp Status", xls_Status_disp, hslString, 255);
    writeReportFile.AddField("Disp Recovery", xls_Recov_disp, hslString, 255);
    writeReportFile.AddField("Liquid Class", i_str_LiquidClass, hslString, 255);
    writeReportFile.AddField("Step Number Asp", str_StepNum_Asp, hslString, 255);
    writeReportFile.AddField("Step Number Disp", str_StepNum_Disp, hslString, 255);
    writeReportFile.AddField("TADM Curve ID Asp", str_TADM_CurveID_Asp, hslString, 255);
    writeReportFile.AddField("TADM Curve ID Disp", str_TADM_CurveID_Disp, hslString, 255);
    writeReportFile.AddField("TADM Time Stamp Asp", str_TADM_Time_Asp, hslString, 255);
    writeReportFile.AddField("TADM Time Stamp Disp", str_TADM_Time_Disp, hslString, 255);
    writeReportFile.AddField("TADM Mode", str_TADM_Mode, hslString, 255);
    if( 0 == writeReportFile.Open(i_str_ReportFilePath + " " + "Report", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, i_str_ReportFilePath, "HxMetEdCompCmd");
    }
    numberOfReturnPosAspirate = StepReturn::GetNumberOfPositions(i_str_AspReturnValue4);
    numberOfReturnPosDispense = StepReturn::GetNumberOfPositions(i_str_DispReturnValue4);
    xls_chan_use = Translate("-----");
    xls_BC_Rack_Asp = Translate("-----");
    xls_BC_Cont_Asp = Translate("-----");
    xls_LabID_asp = Translate("-----");
    xls_PosID_asp = Translate("-----");
    xls_vol_asp = Translate("-----");
    xls_Status_asp = Translate("-----");
    xls_Recov_asp = Translate("-----");
    xls_BC_Rack_Disp = Translate("-----");
    xls_BC_Cont_Disp = Translate("-----");
    xls_LabID_disp = Translate("-----");
    xls_PosID_disp = Translate("-----");
    xls_vol_disp = Translate("-----");
    xls_Status_disp = Translate("-----");
    xls_Recov_disp = Translate("-----");
    str_TADM_CurveID_Asp = Translate("-----");
    str_TADM_CurveID_Disp = Translate("-----");
    str_TADM_Mode = Translate("-----");
    str_TADM_Time_Asp = Translate("-----");
    str_TADM_Time_Disp = Translate("-----");
    str_StepNum_Asp = Translate("-----");
    str_StepNum_Disp = Translate("-----");
    xls_LabID_asp = StepReturn::GetLabwareId(1, i_str_AspReturnValue3);
    xls_Status_asp = StepReturn::GetMainError(1, i_str_AspReturnValue3);
    xls_vol_asp = StepReturn::GetStepData(1, i_str_AspReturnValue3);
    xls_int_Recov_asp = StepReturn::GetRecoveryButton(1, i_str_AspReturnValue3);
    xls_LabID_disp = StepReturn::GetLabwareId(1, i_str_DispReturnValue3);
    xls_Status_disp = StepReturn::GetMainError(1, i_str_DispReturnValue3);
    xls_vol_disp = StepReturn::GetStepData(1, i_str_DispReturnValue3);
    xls_int_Recov_disp = StepReturn::GetRecoveryButton(1, i_str_DispReturnValue3);
    _Asp_Error_Codes(xls_Status_asp, xls_Status_asp);
    _Recovery_Codes(xls_int_Recov_asp, xls_Recov_asp);
    _Disp_Error_Codes(xls_Status_disp, xls_Status_disp);
    _Recovery_Codes(xls_int_Recov_disp, xls_Recov_disp);
    onerror goto errLabel_14 ;
    err.Clear();
    SeqRemoveAll(seq_AspBCGet);
    SeqAdd(seq_AspBCGet, xls_LabID_asp, xls_PosID_asp);
    seq_AspBCGet.SetCurrentPosition(1);
    xls_BC_Rack_Asp = HSLLabwState::GetLabwareBarcode(Instrument, seq_AspBCGet, 300);
    int_length = StrGetLength(xls_BC_Rack_Asp);
    if (int_length == 0)
    {
      xls_BC_Rack_Asp = Translate("-----");
    }
    errLabel_14 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      xls_BC_Rack_Asp = Translate("-----");
    }   /* end if from skip handler if no error */
    onerror goto errLabel_15 ;
    err.Clear();
    SeqRemoveAll(seq_DispBCGet);
    SeqAdd(seq_DispBCGet, xls_LabID_disp, xls_PosID_disp);
    seq_DispBCGet.SetCurrentPosition(1);
    xls_BC_Rack_Disp = HSLLabwState::GetLabwareBarcode(Instrument, seq_DispBCGet, 300);
    int_length = StrGetLength(xls_BC_Rack_Disp);
    if (int_length == 0)
    {
      xls_BC_Rack_Disp = Translate("-----");
    }
    errLabel_15 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      xls_BC_Rack_Disp = Translate("-----");
    }   /* end if from skip handler if no error */
    {
      for(loopCounter1 = 0; loopCounter1 < numberOfReturnPosAspirate;)
      {
        loopCounter1 = loopCounter1 + 1;
        int_IndexPosition = loopCounter1 - 0;
        xls_chan_use = Translate("-----");
        if(0){
          xls_BC_Rack_Asp = Translate("-----");
        }
        xls_BC_Cont_Asp = Translate("-----");
        if(0){
          xls_LabID_asp = Translate("-----");
        }
        xls_PosID_asp = Translate("-----");
        if(0){
          xls_vol_asp = Translate("-----");
          xls_Status_asp = Translate("-----");
          xls_Recov_asp = Translate("-----");
          xls_BC_Rack_Disp = Translate("-----");
        }
        xls_BC_Cont_Disp = Translate("-----");
        if(0){
          xls_LabID_disp = Translate("-----");
        }
        xls_PosID_disp = Translate("-----");
        if(0){
          xls_vol_disp = Translate("-----");
          xls_Status_disp = Translate("-----");
          xls_Recov_disp = Translate("-----");
        }
        str_TADM_CurveID_Asp = Translate("-----");
        str_TADM_CurveID_Disp = Translate("-----");
        str_TADM_Mode = Translate("-----");
        str_TADM_Time_Asp = Translate("-----");
        str_TADM_Time_Disp = Translate("-----");
        str_StepNum_Asp = Translate("-----");
        str_StepNum_Disp = Translate("-----");
        xls_PosID_asp = StepReturn::GetBarcodePosition(int_IndexPosition, i_str_AspReturnValue4);
        xls_chan_use = StepReturn::GetPosition(int_IndexPosition, i_str_AspReturnValue4);
        lengthLabIDAsp = StrGetLength(xls_LabID_asp);
        lengthVolumeAsp = StrGetLength(xls_vol_asp);
        if (lengthLabIDAsp != 0)
        {
          if (lengthVolumeAsp != 0)
          {
            onerror goto errLabel_16 ;
            err.Clear();
            SeqRemoveAll(seq_AspBCGet);
            SeqAdd(seq_AspBCGet, xls_LabID_asp, xls_PosID_asp);
            seq_AspBCGet.SetCurrentPosition(1);
            xls_BC_Cont_Asp = HSLLabwState::GetLabwareBarcode(Instrument, seq_AspBCGet, 400);
            int_length = StrGetLength(xls_BC_Cont_Asp);
            if (int_length == 0)
            {
              xls_BC_Cont_Asp = Translate("-----");
            }
            errLabel_16 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              xls_BC_Cont_Asp = Translate("-----");
            }   /* end if from skip handler if no error */
            if (xls_int_Recov_asp != 5)
            {
              lengthVolAsp = StrGetLength(xls_vol_asp);
              if (lengthVolAsp > 0)
              {
                bool_FileExists = HSLExtensions::File::Exists(str_TADM_FilePath);
                if (bool_FileExists == 1)
                {
                  str_SQL_Count = StrConcat8(Translate("SELECT COUNT(*) AS N FROM [TadmCurve] WHERE [LiquidClassName] = '"), i_str_LiquidClass, Translate("' AND [ChannelNumber] = "), xls_chan_use, Translate(" AND [Volume] = "), xls_vol_asp, Translate(" AND [StepType] = -533331728"), Translate(""));
                  ReadTADM.AddField("N", int_EntryFound, hslInteger);
                  if( 0 == ReadTADM.Open(str_TADM_FilePath + " " + "TadmCurve", hslRead, str_SQL_Count) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_TADM_FilePath, "HxMetEdCompCmd");
                  }
                  if( 0 == ReadTADM.ReadRecord() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  if( 0 != ReadTADM.Close() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  ReadTADM.RemoveFields();
                  if (int_EntryFound > 0)
                  {
                    str_SQL_Sort = StrConcat8(Translate("SELECT * FROM [TadmCurve] WHERE [LiquidClassName] = '"), i_str_LiquidClass, Translate("' AND [ChannelNumber] = "), xls_chan_use, Translate(" AND [Volume] = "), xls_vol_asp, Translate(" AND [StepType] = -533331728"), Translate(" ORDER BY [CurveId] DESC"));
                    ReadTADM.AddField("CurveId", ReadTADM_CurveId, hslInteger);
                    ReadTADM.AddField("LiquidClassName", ReadTADM_LiquidClassName, hslString, 100);
                    ReadTADM.AddField("StepType", ReadTADM_StepType, hslInteger);
                    ReadTADM.AddField("Volume", ReadTADM_Volume, hslFloat);
                    ReadTADM.AddField("TimeStamp", ReadTADM_TimeStamp, hslString, 8);
                    ReadTADM.AddField("StepGuid", ReadTADM_StepGuid, hslString, 36);
                    ReadTADM.AddField("ToleranceBandGuid", ReadTADM_ToleranceBandGuid, hslString, 36);
                    ReadTADM.AddField("StepNumber", ReadTADM_StepNumber, hslInteger);
                    ReadTADM.AddField("Error", ReadTADM_Error, hslInteger);
                    ReadTADM.AddField("ChannelNumber", ReadTADM_ChannelNumber, hslInteger);
                    ReadTADM.AddField("TadmMode", ReadTADM_TadmMode, hslInteger);
                    ReadTADM.AddField("CurveFlagged", ReadTADM_CurveFlagged, hslInteger);
                    ReadTADM.AddField("CheckSum", ReadTADM_CheckSum, hslInteger);
                    if( 0 == ReadTADM.Open(str_TADM_FilePath + " " + "TadmCurve", hslRead, str_SQL_Sort) )
                    {
                          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_TADM_FilePath, "HxMetEdCompCmd");
                    }
                    if( 0 == ReadTADM.ReadRecord() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    if( 0 != ReadTADM.Close() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    ReadTADM.RemoveFields();
                    str_TADM_CurveID_Asp = StrConcat2(ReadTADM_CurveId, Translate(""));
                    str_TADM_Mode = StrConcat2(ReadTADM_TadmMode, Translate(""));
                    str_TADM_Time_Asp = StrConcat2(ReadTADM_TimeStamp, Translate(""));
                    str_StepNum_Asp = StrConcat2(ReadTADM_StepNumber, Translate(""));
                  }
                }
              }
              else
              {
                xls_vol_asp = Translate("-----");
              }
            }
            xls_PosID_disp = StepReturn::GetBarcodePosition(int_IndexPosition, i_str_DispReturnValue4);
            length = StrGetLength(xls_LabID_disp);
            if (length == 0)
            {
              xls_LabID_disp = Translate("-----");
            }
            length = StrGetLength(xls_PosID_disp);
            if (length == 0)
            {
              xls_PosID_disp = Translate("-----");
            }
            length = StrGetLength(xls_vol_disp);
            if (length == 0)
            {
              xls_vol_disp = Translate("-----");
            }
            lengthLabIDDisp = StrGetLength(xls_LabID_disp);
            if (xls_LabID_disp != "-----")
            {
              if (lengthLabIDDisp != 0)
              {
                onerror goto errLabel_17 ;
                err.Clear();
                SeqRemoveAll(seq_DispBCGet);
                SeqAdd(seq_DispBCGet, xls_LabID_disp, xls_PosID_disp);
                seq_DispBCGet.SetCurrentPosition(1);
                xls_BC_Cont_Disp = HSLLabwState::GetLabwareBarcode(Instrument, seq_DispBCGet, 400);
                int_length = StrGetLength(xls_BC_Cont_Disp);
                if (int_length == 0)
                {
                  xls_BC_Cont_Disp = Translate("-----");
                }
                errLabel_17 : {}
                onerror goto 0;
                if (err.GetId() != 0)   /* skip handler if no error */
                {
                  xls_BC_Cont_Disp = Translate("-----");
                }   /* end if from skip handler if no error */
                if (xls_int_Recov_disp != 5)
                {
                  lengthVolDisp = StrGetLength(xls_vol_disp);
                  if (lengthVolDisp > 0)
                  {
                    bool_FileExists = HSLExtensions::File::Exists(str_TADM_FilePath);
                    if (bool_FileExists == 1)
                    {
                      str_SQL_Count = StrConcat8(Translate("SELECT COUNT(*) AS N FROM [TadmCurve] WHERE [LiquidClassName] = '"), i_str_LiquidClass, Translate("' AND [ChannelNumber] = "), xls_chan_use, Translate(" AND [Volume] = "), xls_vol_disp, Translate(" AND [StepType] = -533331727"), Translate(""));
                      ReadTADM.AddField("N", int_EntryFound, hslInteger);
                      if( 0 == ReadTADM.Open(str_TADM_FilePath + " " + "TadmCurve", hslRead, str_SQL_Count) )
                      {
                            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_TADM_FilePath, "HxMetEdCompCmd");
                      }
                      if( 0 == ReadTADM.ReadRecord() )
                      {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      if( 0 != ReadTADM.Close() )
                      {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                      }
                      ReadTADM.RemoveFields();
                      if (int_EntryFound > 0)
                      {
                        str_SQL_Sort = StrConcat8(Translate("SELECT * FROM [TadmCurve] WHERE [LiquidClassName] = '"), i_str_LiquidClass, Translate("' AND [ChannelNumber] = "), xls_chan_use, Translate(" AND [Volume] = "), xls_vol_disp, Translate(" AND [StepType] = -533331727"), Translate(" ORDER BY [CurveId] DESC"));
                        ReadTADM.AddField("CurveId", ReadTADM_CurveId, hslInteger);
                        ReadTADM.AddField("LiquidClassName", ReadTADM_LiquidClassName, hslString, 100);
                        ReadTADM.AddField("StepType", ReadTADM_StepType, hslInteger);
                        ReadTADM.AddField("Volume", ReadTADM_Volume, hslFloat);
                        ReadTADM.AddField("TimeStamp", ReadTADM_TimeStamp, hslString, 8);
                        ReadTADM.AddField("StepGuid", ReadTADM_StepGuid, hslString, 36);
                        ReadTADM.AddField("ToleranceBandGuid", ReadTADM_ToleranceBandGuid, hslString, 36);
                        ReadTADM.AddField("StepNumber", ReadTADM_StepNumber, hslInteger);
                        ReadTADM.AddField("Error", ReadTADM_Error, hslInteger);
                        ReadTADM.AddField("ChannelNumber", ReadTADM_ChannelNumber, hslInteger);
                        ReadTADM.AddField("TadmMode", ReadTADM_TadmMode, hslInteger);
                        ReadTADM.AddField("CurveFlagged", ReadTADM_CurveFlagged, hslInteger);
                        ReadTADM.AddField("CheckSum", ReadTADM_CheckSum, hslInteger);
                        if( 0 == ReadTADM.Open(str_TADM_FilePath + " " + "TadmCurve", hslRead, str_SQL_Sort) )
                        {
                            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_TADM_FilePath, "HxMetEdCompCmd");
                        }
                        if( 0 == ReadTADM.ReadRecord() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        if( 0 != ReadTADM.Close() )
                        {
                            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                        }
                        ReadTADM.RemoveFields();
                        str_TADM_CurveID_Disp = StrConcat2(ReadTADM_CurveId, Translate(""));
                        str_TADM_Mode = StrConcat2(ReadTADM_TadmMode, Translate(""));
                        str_TADM_Time_Disp = StrConcat2(ReadTADM_TimeStamp, Translate(""));
                        str_StepNum_Disp = StrConcat2(ReadTADM_StepNumber, Translate(""));
                      }
                    }
                  }
                  else
                  {
                    xls_vol_disp = Translate("-----");
                  }
                }
              }
              if (xls_BC_Cont_Asp != "-----")
              {
                HSLMapReport::SetElementBarcode(Instrument, xls_LabID_disp, xls_PosID_disp, xls_BC_Cont_Asp);
              }
              if( 0 == writeReportFile.WriteRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
          }
        }
      }
    }
    if( 0 != writeReportFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    writeReportFile.RemoveFields();
  }

  private function _RemoveUnusedCharacters( variable & io_str_TabName ) void {
    if (io_str_TabName != "")
    {
      StrReplace(io_str_TabName, Translate("-"), Translate("_"));
      StrReplace(io_str_TabName, Translate("!"), Translate("_"));
      StrReplace(io_str_TabName, Translate("@"), Translate("_"));
      StrReplace(io_str_TabName, Translate("#"), Translate("_"));
      StrReplace(io_str_TabName, Translate("$"), Translate("_"));
      StrReplace(io_str_TabName, Translate("%"), Translate("_"));
      StrReplace(io_str_TabName, Translate("^"), Translate("_"));
      StrReplace(io_str_TabName, Translate("&"), Translate("_"));
      StrReplace(io_str_TabName, Translate("*"), Translate("_"));
      StrReplace(io_str_TabName, Translate("("), Translate("_"));
      StrReplace(io_str_TabName, Translate(")"), Translate("_"));
      StrReplace(io_str_TabName, Translate("="), Translate("_"));
      StrReplace(io_str_TabName, Translate("+"), Translate("_"));
      StrReplace(io_str_TabName, Translate("`"), Translate("_"));
      StrReplace(io_str_TabName, Translate("~"), Translate("_"));
      StrReplace(io_str_TabName, Translate("\\"), Translate("_"));
      StrReplace(io_str_TabName, Translate("/"), Translate("_"));
      StrReplace(io_str_TabName, Translate("|"), Translate("_"));
      StrReplace(io_str_TabName, Translate("["), Translate("_"));
      StrReplace(io_str_TabName, Translate("]"), Translate("_"));
      StrReplace(io_str_TabName, Translate("{"), Translate("_"));
      StrReplace(io_str_TabName, Translate("}"), Translate("_"));
      StrReplace(io_str_TabName, Translate("<"), Translate("_"));
      StrReplace(io_str_TabName, Translate(">"), Translate("_"));
      StrReplace(io_str_TabName, Translate("?"), Translate("_"));
      StrReplace(io_str_TabName, Translate(","), Translate("_"));
      StrReplace(io_str_TabName, Translate("."), Translate("_"));
      StrReplace(io_str_TabName, Translate(" "), Translate("_"));
    }
    else
    {
      io_str_TabName = Translate("_");
    }
  }

  private function _LookUp( variable & array[], variable item ) variable {
    private variable index;
    private variable lookupreturn;
    lookupreturn = Util::Lookup(array, item, index);
    if (lookupreturn > 0)
    {
      index = index + 1;
      return (index);
    }
    else
    {
      return (0);
    }
  }
} // library namespace
