#pragma once
#include "HSLUtilLib.hsl"
#include "HSLTrcLib.hsl"
#include "HSLUtilLib2.hsl"
#include "HSLStrLib.hsl"
#include "HSLArrLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace TRACKLIGHTHELPER {
  global variable TurnLightOff(3); // This command turns the loading lights off for a track or all tracks.
  global variable TurnLightOn(1); // This command will turn the lights solidly on for a track or all tracks.
  global variable TurnLightOnBlinking(2); // This command will turn the loading lights on and make them blink for a track, or all tracks.
  variable __trackLightArraySize__(56);
  variable hexadecimalTrackString_BlinkSteady;
  variable binaryChunk_OnOff;
  variable binaryChunk_SteadyBlinking;
  function PerformTrackLightCommand( variable trackNumber, variable command, device & star ) variable ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function PerformTrackLightCommand( variable trackNumber, variable command, device & star ) variable {
    private variable isValid;
    private variable trackIndex;
    private variable trackIndexLoopCounter;
    private variable __hexadecimalLookupArray__[];
    private variable __binaryLookupArray__[];
    private variable retVal;
    private variable commandString;
    private variable OnOffArraySize;
    private variable BlinkSteadyArraySize;
    private variable hexadecimalTrackString_OnOff;
    private variable VALUE_OnOff;
    private variable VALUE_SteadyBlinking;
    private variable INDEX_OnOff(0);
    private variable INDEX_SteadyBlinking(0);
    TrcFormatTrace4(Translate("TrackLightHelper::"), Translate("PerformTrackLightCommand"), 1, Translate(" with trackNumber: "), trackNumber, Translate(" and command: "), command);
    isValid = Util::IsInteger(trackNumber);
    if (isValid == 0)
    {
      TrcFormatTrace(Translate("TrackLightHelper::"), Translate("PerformTrackLightCommand"), 3, Translate("The trackNumber variable specified was not an integer! Please check that it is a variable type and not a string."), Translate(""));
      TrcFormatTrace(Translate("TrackLightHelper::"), Translate("PerformTrackLightCommand"), 5, Translate(""), Translate(""));
      return (1);
    }
    if (trackNumber < 0)
    {
      TrcFormatTrace(Translate("TrackLightHelper::"), Translate("PerformTrackLightCommand"), 5, Translate("The trackNumber must be in the range [0...55]. 0 indicates that the command issue will apply to all tracks."), Translate(""));
      return (1);
    }
    if (trackNumber > 55)
    {
      TrcFormatTrace(Translate("TrackLightHelper::"), Translate("PerformTrackLightCommand"), 5, Translate("The trackNumber must be in the range [0...55]. 0 indicates that the command issue will apply to all tracks."), Translate(""));
      return (1);
    }
    isValid = Util::IsInteger(command);
    if (isValid == 0)
    {
      TrcFormatTrace(Translate("TrackLightHelper::"), Translate("PerformTrackLightCommand"), 3, Translate("The command variable specified was not valid. Please check that it was selected from one of the TrackLightHelper:: variables in the drop down.!"), Translate(""));
      TrcFormatTrace(Translate("TrackLightHelper::"), Translate("PerformTrackLightCommand"), 5, Translate(""), Translate(""));
      return (1);
    }
    if (command != TurnLightOn)
    {
      if (command != TurnLightOnBlinking)
      {
        if (command != TurnLightOff)
        {
          TrcFormatTrace(Translate("TrackLightHelper::"), Translate("PerformTrackLightCommand"), 5, Translate("The command specified was not recognized. Please check that it is one from the TrackLightHelper:: variables in the dropdown"), Translate(""));
          return (1);
        }
      }
    }
    OnOffArraySize = VarArrGetSize(0);
    BlinkSteadyArraySize = VarArrGetSize(1);
    //step 1: check if either rows are empty
    if(OnOffArraySize == 0 || BlinkSteadyArraySize == 0)
    {
          variable index(0);
          //step 2: set columns to 56 elements
          VarArrSetSize(0, __trackLightArraySize__);
          VarArrSetSize(1, __trackLightArraySize__);
          //step 3: set defaults (off/steady)
          while(index < __trackLightArraySize__)
          {
                 VarArrSetAt(0, index, 0); //set track lights off
                 VarArrSetAt(0, index, 0); //set to steady
                 index++;
          }
    }
    if (trackNumber == 0)
    {
      {
        for(trackIndexLoopCounter = 0; trackIndexLoopCounter < 55;)
        {
          trackIndexLoopCounter = trackIndexLoopCounter + 1;
          if (command == TurnLightOff)
          {
            VarArrSetAt(0, trackNumber, 0);
            VarArrSetAt(1, trackNumber, 0);
          }
          if (command == TurnLightOn)
          {
            VarArrSetAt(0, trackNumber, 1);
            VarArrSetAt(1, trackNumber, 0);
          }
          if (command == TurnLightOnBlinking)
          {
            VarArrSetAt(0, trackNumber, 1);
            VarArrSetAt(1, trackNumber, 1);
          }
          trackNumber = trackNumber + 1;
        }
      }
    }
    else
    {
      trackNumber = trackNumber - 1;
      if (command == TurnLightOff)
      {
        VarArrSetAt(1, trackNumber, 0);
        VarArrSetAt(0, trackNumber, 0);
      }
      if (command == TurnLightOn)
      {
        VarArrSetAt(0, trackNumber, 1);
        VarArrSetAt(1, trackNumber, 0);
      }
      if (command == TurnLightOnBlinking)
      {
        VarArrSetAt(0, trackNumber, 1);
        VarArrSetAt(1, trackNumber, 1);
      }
    }
    trackIndex = 0;
    hexadecimalTrackString_OnOff = "";
    hexadecimalTrackString_BlinkSteady = "";
    __binaryLookupArray__.SetSize(0);
    __binaryLookupArray__.AddAsLast("0000");
    __binaryLookupArray__.AddAsLast("0001");
    __binaryLookupArray__.AddAsLast("0010");
    __binaryLookupArray__.AddAsLast("0011");
    __binaryLookupArray__.AddAsLast("0100");
    __binaryLookupArray__.AddAsLast("0101");
    __binaryLookupArray__.AddAsLast("0110");
    __binaryLookupArray__.AddAsLast("0111");
    __binaryLookupArray__.AddAsLast("1000");
    __binaryLookupArray__.AddAsLast("1001");
    __binaryLookupArray__.AddAsLast("1010");
    __binaryLookupArray__.AddAsLast("1011");
    __binaryLookupArray__.AddAsLast("1100");
    __binaryLookupArray__.AddAsLast("1101");
    __binaryLookupArray__.AddAsLast("1110");
    __binaryLookupArray__.AddAsLast("1111");
    __hexadecimalLookupArray__.SetSize(0);
    __hexadecimalLookupArray__.AddAsLast("0");
    __hexadecimalLookupArray__.AddAsLast("1");
    __hexadecimalLookupArray__.AddAsLast("2");
    __hexadecimalLookupArray__.AddAsLast("3");
    __hexadecimalLookupArray__.AddAsLast("4");
    __hexadecimalLookupArray__.AddAsLast("5");
    __hexadecimalLookupArray__.AddAsLast("6");
    __hexadecimalLookupArray__.AddAsLast("7");
    __hexadecimalLookupArray__.AddAsLast("8");
    __hexadecimalLookupArray__.AddAsLast("9");
    __hexadecimalLookupArray__.AddAsLast("A");
    __hexadecimalLookupArray__.AddAsLast("B");
    __hexadecimalLookupArray__.AddAsLast("C");
    __hexadecimalLookupArray__.AddAsLast("D");
    __hexadecimalLookupArray__.AddAsLast("E");
    __hexadecimalLookupArray__.AddAsLast("F");
    {
      trackIndexLoopCounter = 0;
      while (trackIndex < __trackLightArraySize__)
      {
        trackIndexLoopCounter = trackIndexLoopCounter + 1;
            binaryChunk_OnOff =
             StrIStr(VarArrGetAt(0, trackIndex+3))
           + StrIStr(VarArrGetAt(0, trackIndex+2))
           + StrIStr(VarArrGetAt(0, trackIndex+1))
           + StrIStr(VarArrGetAt(0, trackIndex));
            binaryChunk_SteadyBlinking =
             StrIStr(VarArrGetAt(1, trackIndex+3))
           + StrIStr(VarArrGetAt(1, trackIndex+2))
           + StrIStr(VarArrGetAt(1, trackIndex+1))
           + StrIStr(VarArrGetAt(1, trackIndex));
        retVal = Util::Lookup(__binaryLookupArray__, binaryChunk_OnOff, INDEX_OnOff);
        if (retVal == 0)
        {
          TrcFormatTrace4(Translate("TrackLightHelper::"), Translate("PerformTrackLightCommand"), 3, Translate("Binary lookup failed!. The following binary chunk ["), binaryChunk_OnOff, Translate("] was not found in the binary array. The binary and hexadecimal arrays will be traced below: "), Translate(""));
          Util2::Debug::TraceArray_2(Translate("-- Binary and Hexadecimal lookup arrays --"), __binaryLookupArray__, __hexadecimalLookupArray__);
          TrcFormatTrace(Translate("TrackLightHelper::"), Translate("PerformTrackLightCommand"), 5, Translate(""), Translate(""));
          return (1);
        }
        retVal = Util::Lookup(__binaryLookupArray__, binaryChunk_SteadyBlinking, INDEX_SteadyBlinking);
        if (retVal == 0)
        {
          TrcFormatTrace4(Translate("TrackLightHelper::"), Translate("PerformTrackLightCommand"), 3, Translate("Binary lookup failed!. The following binary chunk ["), binaryChunk_SteadyBlinking, Translate("] was not found in the binary array. The binary and hexadecimal arrays will be traced below: "), Translate(""));
          Util2::Debug::TraceArray_2(Translate("-- Binary and Hexadecimal lookup arrays --"), __binaryLookupArray__, __hexadecimalLookupArray__);
          TrcFormatTrace(Translate("TrackLightHelper::"), Translate("PerformTrackLightCommand"), 5, Translate(""), Translate(""));
          return (1);
        }
        onerror goto errLabel_1 ;
        err.Clear();
        if(0){
          TrcTrace8(Translate("for chunk: "), binaryChunk_OnOff, Translate(" retrieved index: "), INDEX_OnOff, Translate(" at trackIndex: "), trackIndex, Translate(""), Translate(""));
        }
        INDEX_OnOff = INDEX_OnOff + 1;
        VALUE_OnOff=__hexadecimalLookupArray__.GetAt(INDEX_OnOff-1);
        if(0){
          TrcTrace8(Translate("for chunk: "), binaryChunk_OnOff, Translate(" retrieved index: "), INDEX_OnOff, Translate(" and hex value: "), VALUE_OnOff, Translate(""), Translate(""));
        }
        errLabel_1 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          TrcFormatTrace4(Translate("TrackLightHelper::"), Translate("PerformTrackLightCommand"), 3, Translate("Hex lookup failed!. The following binary index ["), INDEX_OnOff, Translate("] was not found in the binary lookup array. The binary and hexadecimal arrays will be traced below: "), Translate(""));
          Util2::Debug::TraceArray_2(Translate("-- Binary and Hexadecimal lookup arrays --"), __binaryLookupArray__, __hexadecimalLookupArray__);
          TrcFormatTrace(Translate("TrackLightHelper::"), Translate("PerformTrackLightCommand"), 5, Translate(""), Translate(""));
          return (1);
        }   /* end if from skip handler if no error */
        onerror goto errLabel_2 ;
        err.Clear();
        if(0){
          TrcTrace8(Translate("for chunk: "), binaryChunk_SteadyBlinking, Translate(" retrieved index: "), INDEX_SteadyBlinking, Translate(" at trackIndex: "), trackIndex, Translate(""), Translate(""));
        }
        INDEX_SteadyBlinking = INDEX_SteadyBlinking + 1;
        VALUE_SteadyBlinking=__hexadecimalLookupArray__.GetAt(INDEX_SteadyBlinking-1);
        if(0){
          TrcTrace8(Translate("for chunk: "), binaryChunk_SteadyBlinking, Translate(" retrieved index: "), INDEX_SteadyBlinking, Translate(" and hex value: "), VALUE_SteadyBlinking, Translate(""), Translate(""));
        }
        errLabel_2 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          TrcFormatTrace4(Translate("TrackLightHelper::"), Translate("PerformTrackLightCommand"), 3, Translate("Hex lookup failed!. The following binary index ["), INDEX_SteadyBlinking, Translate("] was not found in the binary lookup array. The binary and hexadecimal arrays will be traced below: "), Translate(""));
          Util2::Debug::TraceArray_2(Translate("-- Binary and Hexadecimal lookup arrays --"), __binaryLookupArray__, __hexadecimalLookupArray__);
          TrcFormatTrace(Translate("TrackLightHelper::"), Translate("PerformTrackLightCommand"), 5, Translate(""), Translate(""));
          return (1);
        }   /* end if from skip handler if no error */
        hexadecimalTrackString_OnOff = VALUE_OnOff + hexadecimalTrackString_OnOff;
        hexadecimalTrackString_BlinkSteady = VALUE_SteadyBlinking + hexadecimalTrackString_BlinkSteady;
        trackIndex = trackIndex + 4;
      }
    }
    if(0){
      TrcTrace8(Translate("exited the loop"), Translate("and the hex string for row 0 is: ["), hexadecimalTrackString_OnOff, Translate("] and the hex string for row 1 is ["), hexadecimalTrackString_BlinkSteady, Translate("]"), Translate(""), Translate(""));
    }
    commandString = Translate("cb") + hexadecimalTrackString_BlinkSteady;
    if(0){
      TrcTrace8(Translate("Command string for blinking ["), commandString, Translate("]"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    }
    star.FirmwareCommand("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");
    commandString = Translate("cl") + hexadecimalTrackString_OnOff;
    if(0){
      TrcTrace8(Translate("Command string for on/off ["), commandString, Translate("]"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    }
    star.FirmwareCommand("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");
    TrcFormatTrace(Translate("TrackLightHelper::"), Translate("PerformTrackLightCommand"), 2, Translate(""), Translate(""));
    return (0);
  }
} // library namespace
