#pragma once
#include "HSLFilLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLTrcLib.hsl"
#include "HSLDevLib.hsl"
#include "HSLMappingReport.hsl"
#include "HSLSeqLib.hsl"
#include "Visual_NTR_library\\VirtualLabware.hsl"
#include "HSLMthLib.hsl"
#include "HSLML_STARLib.hsl"
#include "Visual_NTR_library\\HSL_GetNumOfDefPosInRack.hsl"
#include "HSLUtilLib.hsl"
#include "HSLUtilLib2.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace VISUAL_NTR_LIBRARY {
  private function A_Abstract(  ) void ;
  private function A_DefineCustomizedTipManagement_db_path( variable & db_fullPath ) void ;
  private function CalculateAbsoluteSeqPosition( variable currentStack, variable currentLayer, variable tipPosInRack, variable sortByTier, variable NumberOfStacks, variable NumberOfLayers, variable tipsPerRack, variable & calculatedSeqPos, variable indivColumnSelection ) void ;
  private function CalculateCurrentStackAndTipsLeftinLayer( sequence iNTRTipSeq, variable total_stacks, variable NumOfLayersPerStack, variable num_of_tips_per_rack, variable indivColumnSelection, variable sortByTier, variable & currentStack, variable & currentLayer, variable & tips_remaining_in_currentRack, variable & tips_remaining_in_currentLayer, variable & selectedCel ) void ;
  private function ChannelPattern_LeftAdjust( variable iTotalNumberOfChannels, variable iNumberOfChannels, variable & oChannelPattern ) void ;
  private function ChannelPattern_RightAdjust( variable iTotalNumberOfChannels, variable iNumberOfChannels, variable & oChannelPattern ) void ;
  function Channels_TipCounter_Edit( device & ML_STAR, sequence & ioNTRTipSequence, variable iNTRTipCounterName, variable iEditBoxTitleString, variable iSortByTier, variable iDialog_timeout ) void ;
  function Channels_TipCounter_Write( device & ML_STAR, sequence & iNTRTipSequence, variable iNTRTipCounterName, sequence & iNTRFrameWasteSequence, sequence & ioCOREGrippersSequence, variable iEjectPaddlesAfterDiscardRack, variable iNTRRackDisposalChoice, variable iFinalRackInTier_TipDisposal, sequence & ioSeq_FinalTipInTierDestination, variable iTransportChoice, variable iChannelsForTransport, variable iSWAPGripDirection, variable iParkSWAP_rightSide, variable iEditBoxTitleString, variable iDialog_timeout ) void ;
  private function CheckEmptyRacksBeforeTipPickUp( variable iNTRTipCounterName, sequence & iNTRTipSequence, sequence & iNTRFrameWasteSequence, sequence ioCOREGrippersSequence, variable iTransportChoice, variable iChannelsForTransport, device & ML_STAR, variable iFinalRackInTier_TipDisposal, sequence & ioSeq_FinalTipInTierDestination, variable pipetting_tool, variable iNTRRackDisposalChoice, variable iMessage, variable iEjectPaddlesAfterDiscardRack, variable iDialog_timeout, variable iSWAPGripDirection, variable iParkSWAPOnRight ) void ;
  private function DiscardTipsWithChannels( sequence & iNTRTipSequence, variable remainingTipsInRack, device & ML_STAR, variable numOfChannelsInstalled, sequence & ioSeq_FinalTipInTierDestination ) void ;
  function GetCarrierIDandSiteID_FromLabID( device & io_instrument, variable i_labware_ID, variable & o_carrier_ID, variable & o_site_ID ) variable ;
  private function GetNumberOfPositionsLeft( sequence seq, variable & numberOfPositionsLeft ) void ;
  private function LookUpValueInArray( variable & array_to_LookUp[], variable value_to_LookUp ) variable ;
  function MPH_TipCounter_Edit( device & ML_STAR, sequence & ioNTRTipSequence, variable iNTRTipCounterName, variable iEditBoxTitleString, variable iSingleColumnPickup, variable iDialog_timeout ) void ;
  function MPH_TipCounter_Write( device & ML_STAR, sequence & iNTRTipSequence, variable iNTRTipCounterName, sequence & iNTRFrameWasteSequence, sequence & ioCOREGrippersSequence, variable iEjectPaddlesAfterDiscardRack, variable iTransportChoice, variable iChannelsForTransport, variable iSWAPGripDirection, variable iParkSWAP_rightSide, variable iEditBoxTitleString, variable iNTRRackDisposalChoice, variable iDialog_timeout ) void ;
  private function NTR_Seq_Edit( device & ML_STAR, sequence & ioNTRTipSequence, variable sortByTier, variable iSingleColumnPickup, variable pipetting_tool, variable iNTRTipCounterName, variable iEditBoxTitleString, variable iDialog_timeout ) void ;
  private function NTR_Tip_Counter_Read( sequence & ioNTRTipSequence, variable iNTRTipCounterName, variable & endPosition, variable & currentLayer ) variable ;
  private function NTR_to_waste_core_VENUS( device & ML_STAR, sequence & RackSequenceToThrowInWaste, sequence & RackPositionOnWasteBlock, sequence & CORE_GripperSequence, variable CORE_Tool_Already_Present, variable Eject_CORE_Tool_After_Step, variable ParkISwapOnRight, variable iTransportChoice, variable iChannelsForTransport, variable iSWAPGripDirection ) void ;
  private function Read_RackTossStoredPosition( variable & position, variable iNTRTipCounter ) void ;
  private function Read_Vars_for_NTRSeq( variable iNTRTipCounter, variable & num_of_stacks, variable & tips_per_rack, variable & num_of_tiers, variable & firstPosUsedInTier, variable & sortByTier, variable & indivColumnSelection ) void ;
  function Reset_TipCounter( variable iTipCounterName ) void ;
  private function Show_NTR_Editor( sequence & seq, variable iNTRTipCounter, variable iMessage, variable iDialog_Timeout ) variable ;
  function SortSeqToDiscardEmptyNTROnDeck( sequence i_NTRseq, variable i_SortChoice, sequence & o_WasteNTRseq, device & ML_STAR ) void ;
  private function StorePosition( variable position, variable iNTRTipCounter ) void ;
  private function StoreRackTossPosition( variable position, variable iNTRTipCounter ) void ;
  private function StrTokenize( variable strIn, variable strDelimiter, variable & arrTokens[], variable bAttendEmptyTokens ) void ;
  private function Tip_Counter_Write_Internal( sequence & ioTipSequence, variable iTipCounterName, variable currentLayer ) variable ;
  private function _Analyze_Seq_to_build_NTR_GUI( sequence & iPlateStack_seq, device & ML_STAR, variable iSeqSortChoice, variable indivColumnsEditing, variable pipetting_tool, variable iNTRTipCounter ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function Channels_TipCounter_Edit( device & ML_STAR, sequence & ioNTRTipSequence, variable iNTRTipCounterName, variable iEditBoxTitleString, variable iSortByTier, variable iDialog_timeout ) void {
    private variable isSimulation;
    isSimulation = Util::GetSimulationMode();
    if (isSimulation == 1)
    {
      iNTRTipCounterName = StrConcat2(iNTRTipCounterName, Translate("_simulation"));
    }
    NTR_Seq_Edit(ML_STAR, ioNTRTipSequence, iSortByTier, 1, Translate("chn"), iNTRTipCounterName, iEditBoxTitleString, iDialog_timeout);
  }

  private function NTR_Tip_Counter_Read( sequence & ioNTRTipSequence, variable iNTRTipCounterName, variable & endPosition, variable & currentLayer ) variable {
    private variable myTipCounter;
    private variable readSuccess;
    private variable currentPosition;
    private variable sqlCommand;
    private file TIP_COUNT_READ;
    private file TIP_COUNT_ADD;
    private variable db_fullPath;
    endPosition = 0;
    currentLayer = 0;
    A_DefineCustomizedTipManagement_db_path(db_fullPath);
    sqlCommand = StrConcat4(Translate("SELECT * FROM [TipCounters] WHERE [TipCounter] = '"), iNTRTipCounterName, Translate("'"), Translate(""));
    readSuccess = 0;
    {
      while (readSuccess == 0)
      {
        onerror goto errLabel_1 ;
        err.Clear();
        TIP_COUNT_READ.AddField("TipCounter", myTipCounter, hslString, 255);
        TIP_COUNT_READ.AddField("CurrentPosition", currentPosition, hslInteger);
        TIP_COUNT_READ.AddField("EndPosition", endPosition, hslInteger);
        TIP_COUNT_READ.AddField("CurrentLayer", currentLayer, hslInteger);
        if( 0 == TIP_COUNT_READ.Open(db_fullPath + " " + "TipCounters", hslAppend, sqlCommand) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, db_fullPath, "HxMetEdCompCmd");
        }
        if( 0 == TIP_COUNT_READ.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        return (currentPosition);
        if( 0 != TIP_COUNT_READ.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        TIP_COUNT_READ.RemoveFields();
        readSuccess = 1;
        errLabel_1 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          MECC::TraceComment(Translate(">>>> Error description: The tip counter has not been added to the database yet.   \n>>>> Error recovery:  A  new entry in the database for this tip counter index has been created."));
          if( 0 != TIP_COUNT_READ.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          TIP_COUNT_READ.RemoveFields();
          currentPosition = ioNTRTipSequence.GetCurrentPosition();
          endPosition = ioNTRTipSequence.GetCount();
          currentLayer = 1;
          TIP_COUNT_ADD.AddField("TipCounter", iNTRTipCounterName, hslString, 255);
          TIP_COUNT_ADD.AddField("CurrentPosition", currentPosition, hslInteger);
          TIP_COUNT_ADD.AddField("EndPosition", endPosition, hslInteger);
          TIP_COUNT_ADD.AddField("CurrentLayer", currentLayer, hslInteger);
          if( 0 == TIP_COUNT_ADD.Open(db_fullPath + " " + "TipCounters", hslAppend) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, db_fullPath, "HxMetEdCompCmd");
          }
          if( 0 == TIP_COUNT_ADD.WriteRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 != TIP_COUNT_ADD.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          TIP_COUNT_ADD.RemoveFields();
          return (currentPosition);
        }   /* end if from skip handler if no error */
      }
    }
  }

  private function NTR_to_waste_core_VENUS( device & ML_STAR, sequence & RackSequenceToThrowInWaste, sequence & RackPositionOnWasteBlock, sequence & CORE_GripperSequence, variable CORE_Tool_Already_Present, variable Eject_CORE_Tool_After_Step, variable ParkISwapOnRight, variable iTransportChoice, variable iChannelsForTransport, variable iSWAPGripDirection ) void {
    private variable RackLabwareID;
    private variable ntrANGLE;
    private variable iswapPresent;
    private variable Delta_X;
    private variable WasteLabwareID;
    private variable ntrX;
    private variable ntrY;
    private variable Delta_X_back;
    private variable ntrZ;
    private variable COREGripHeight;
    private variable COREGripOpening;
    private variable CurrFileNameOfLabware;
    private variable COREGripWidth;
    private variable currentlabwareIDForTranslation;
    private variable iSWAPGripHeight;
    private variable iSWAPGripOpening;
    private variable iSWAPGripWidth;
    private variable currentlabwareIDForTranslation_left18;
    private variable strWasteSeqName;
    private variable STAR_type;
    private variable a_coord;
    private variable y_coord;
    private variable x_coord;
    private variable z_coord;
    private variable tmp_x;
    private variable tmp_y;
    private variable tmp_z;
    private sequence single_NTR_to_discard;
    private variable labIDToDiscard;
    private variable labID_rackToDiscard;
    private variable labID_tmpRackWaste;
    private variable labIDs[];
    private variable labID;
    private variable array_index;
    private variable numOfRacksInWasteSeq;
    private variable new_labID_index;
    private variable newWasteSeqPos;
    private variable currentPosWasteSeq;
    private dialog customDialog_2;
    strWasteSeqName = SeqGetName(RackPositionOnWasteBlock);
    strWasteSeqName = StrMakeUpper(strWasteSeqName);
    currentPosWasteSeq = RackPositionOnWasteBlock.GetCurrentPosition();
    if (currentPosWasteSeq == 0)
    {
      if (strWasteSeqName != "DEFAULT")
      {
        customDialog_2.InitCustomDialog("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");
        customDialog_2.ShowCustomDialog();
        RackPositionOnWasteBlock.SetCurrentPosition(1);
      }
    }
    SeqGetLabwareIds(RackPositionOnWasteBlock, labIDs);
    numOfRacksInWasteSeq=labIDs.GetSize();
    currentlabwareIDForTranslation = SeqGetLabwareId(RackSequenceToThrowInWaste);
    currentlabwareIDForTranslation_left18 = StrLeft(currentlabwareIDForTranslation, 18);
    CurrFileNameOfLabware = VIRTUALLABWARE::GetFileNameOfLabware(ML_STAR, currentlabwareIDForTranslation);
    labIDToDiscard = StrConcat2(currentlabwareIDForTranslation, Translate("_toDiscard"));
    DevGetLabwarePositionEx(ML_STAR, currentlabwareIDForTranslation, Translate("1"), x_coord, y_coord, z_coord, a_coord);
    DevAddLabware(ML_STAR, labIDToDiscard, CurrFileNameOfLabware, x_coord, y_coord, z_coord, a_coord);
    SeqRemoveAll(single_NTR_to_discard);
    SeqAdd(single_NTR_to_discard, labIDToDiscard, Translate("1"));
    single_NTR_to_discard.SetCurrentPosition(1);
    labID_rackToDiscard = SeqGetLabwareId(single_NTR_to_discard);
    if (strWasteSeqName == "DEFAULT")
    {
      STAR_type = HSLML_STAR::GetInstrumentType_GlobalDevice(ML_STAR);
      if (STAR_type == 0)
      {
        tmp_x = 1290;
      }
      else
      {
        tmp_x = 750;
      }
      tmp_x = tmp_x - x_coord;
      tmp_y = 350 - y_coord;
      tmp_z = 245 - z_coord;
      VIRTUALLABWARE::MoveCloneSeq(ML_STAR, single_NTR_to_discard, RackPositionOnWasteBlock, tmp_x, tmp_y, tmp_z);
      RackPositionOnWasteBlock.SetCurrentPosition(1);
    }
    labID_tmpRackWaste = SeqGetLabwareId(RackPositionOnWasteBlock);
    if (iTransportChoice == 0)
    {
      if (currentlabwareIDForTranslation_left18 == "TIP384_384TIPS_NTR")
      {
        Delta_X = -34.3;
        COREGripHeight = 21;
        COREGripWidth = 79;
        COREGripOpening = 86;
      }
      else
      {
        if (currentlabwareIDForTranslation_left18 == "TIP384_96TIPS_NTR_")
        {
          Delta_X = -34.3;
          COREGripHeight = 21;
          COREGripWidth = 79;
          COREGripOpening = 86;
        }
        else
        {
          Delta_X = -20;
          COREGripHeight = 21;
          COREGripWidth = 76;
          COREGripOpening = 81;
        }
      }
      Delta_X_back = Delta_X * -1;
      CORE_GripperSequence.SetCurrentPosition(1);
      if(0){
        WasteLabwareID = SeqGetLabwareId(RackPositionOnWasteBlock);
        DevGetLabwarePosition(ML_STAR, labID_tmpRackWaste, ntrX, ntrY, ntrZ, ntrANGLE);
        TrcTrace8(Translate(" NTRToWaste: Position of Waste: WasteRackLabwareID = "), labID_tmpRackWaste, Translate(",   ntrX = "), ntrX, Translate(",   ntrY = "), ntrY, Translate(",   ntrZ = "), ntrZ);
      }
      RackLabwareID = SeqGetLabwareId(single_NTR_to_discard);
      DevGetLabwarePosition(ML_STAR, labID_rackToDiscard, ntrX, ntrY, ntrZ, ntrANGLE);
      TrcTrace8(Translate(" NTRToWaste: Position of Labware BEFORE shifting: RackLabwareID = "), labID_rackToDiscard, Translate(",   ntrX = "), ntrX, Translate(",   ntrY = "), ntrY, Translate(",   ntrZ = "), ntrZ);
      VIRTUALLABWARE::MoveSeq(ML_STAR, single_NTR_to_discard, Delta_X, 0, 0);
      RackLabwareID = SeqGetLabwareId(single_NTR_to_discard);
      DevGetLabwarePosition(ML_STAR, labID_rackToDiscard, ntrX, ntrY, ntrZ, ntrANGLE);
      TrcTrace8(Translate(" NTRToWaste: Position of Labware AFTER shifting: RackLabwareID = "), labID_rackToDiscard, Translate(",   ntrX = "), ntrX, Translate(",   ntrY = "), ntrY, Translate(",   ntrZ = "), ntrZ);
    }
    else
    {
      if (currentlabwareIDForTranslation_left18 == "TIP384_384TIPS_NTR")
      {
        iSWAPGripHeight = 22;
        iSWAPGripWidth = 77;
        iSWAPGripOpening = 90;
      }
      else
      {
        if (currentlabwareIDForTranslation_left18 == "TIP384_96TIPS_NTR_")
        {
          iSWAPGripHeight = 22;
          iSWAPGripWidth = 77;
          iSWAPGripOpening = 90;
        }
        else
        {
          iSWAPGripHeight = 25;
          iSWAPGripWidth = 77;
          iSWAPGripOpening = 90;
        }
      }
    }
    onerror goto errLabel_3 ;
    err.Clear();
    if (iTransportChoice == 0)
    {
      if (ntrY > 433.8)
      {
        iswapPresent = DevGetCfgValueWithKey(ML_STAR, 36);
        if (iswapPresent != 0)
        {
          ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
          ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
        }
      }
      if (Eject_CORE_Tool_After_Step == 1)
      {
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        if(0){
          {
            	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
          }
        }
      }
      else
      {
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        if(0){
          {
            	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
          }
        }
      }
      if (ntrY > 433.8)
      {
        if (iswapPresent != 0)
        {
          if (ParkISwapOnRight == 1)
          {
            ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
            ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          }
        }
      }
    }
    else
    {
      if (iSWAPGripDirection == 0)
      {
        if (Eject_CORE_Tool_After_Step == 0)
        {
          ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
          ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
          if(0){
            {
              	ML_STAR._8A76E9A2_8053_4a32_B36F_AD9556B09C99("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"); // EasyiSWAPTransport
            }
          }
        }
        else
        {
          ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
          ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
          ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
          if(0){
            {
              	ML_STAR._8A76E9A2_8053_4a32_B36F_AD9556B09C99("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"); // EasyiSWAPTransport
            }
          }
        }
      }
      else
      {
        if (Eject_CORE_Tool_After_Step == 0)
        {
          ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
          ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
          if(0){
            {
              	ML_STAR._8A76E9A2_8053_4a32_B36F_AD9556B09C99("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"); // EasyiSWAPTransport
            }
          }
        }
        else
        {
          ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
          ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
          ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
          if(0){
            {
              	ML_STAR._8A76E9A2_8053_4a32_B36F_AD9556B09C99("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"); // EasyiSWAPTransport
            }
          }
        }
      }
    }
    if (iTransportChoice == 0)
    {
      if(0){
        RackLabwareID = SeqGetLabwareId(single_NTR_to_discard);
        DevGetLabwarePosition(ML_STAR, RackLabwareID, ntrX, ntrY, ntrZ, ntrANGLE);
        VIRTUALLABWARE::MoveSeq(ML_STAR, RackSequenceToThrowInWaste, Delta_X_back, 0, 0);
        RackLabwareID = SeqGetLabwareId(RackSequenceToThrowInWaste);
        DevGetLabwarePosition(ML_STAR, RackLabwareID, ntrX, ntrY, ntrZ, ntrANGLE);
        TrcTrace8(Translate(" NTRToWaste: Position of Labware AFTER SHIFTING BACK: RackLabwareID = "), RackLabwareID, Translate(",   ntrX = "), ntrX, Translate(",   ntrY = "), ntrY, Translate(",   ntrZ = "), ntrZ);
      }
    }
    errLabel_3 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
    DevRemoveLabware(ML_STAR, labID_rackToDiscard);
    if (strWasteSeqName == "DEFAULT")
    {
      DevRemoveLabware(ML_STAR, labID_tmpRackWaste);
    }
    if (numOfRacksInWasteSeq > 1)
    {
      labID = SeqGetLabwareId(RackPositionOnWasteBlock);
      array_index = LookUpValueInArray(labIDs, labID);
      if (array_index == numOfRacksInWasteSeq)
      {
        RackPositionOnWasteBlock.SetCurrentPosition(0);
      }
      else
      {
        new_labID_index = array_index + 1;
        labID=labIDs.GetAt(new_labID_index-1);
        newWasteSeqPos = SeqLookupPosition(RackPositionOnWasteBlock, labID, Translate("1"), 1, 1);
        RackPositionOnWasteBlock.SetCurrentPosition(newWasteSeqPos);
      }
    }
  }

  function MPH_TipCounter_Edit( device & ML_STAR, sequence & ioNTRTipSequence, variable iNTRTipCounterName, variable iEditBoxTitleString, variable iSingleColumnPickup, variable iDialog_timeout ) void {
    private variable isSimulation;
    isSimulation = Util::GetSimulationMode();
    if (isSimulation == 1)
    {
      iNTRTipCounterName = StrConcat2(iNTRTipCounterName, Translate("_simulation"));
    }
    NTR_Seq_Edit(ML_STAR, ioNTRTipSequence, 0, iSingleColumnPickup, Translate("mph"), iNTRTipCounterName, iEditBoxTitleString, iDialog_timeout);
  }

  function MPH_TipCounter_Write( device & ML_STAR, sequence & iNTRTipSequence, variable iNTRTipCounterName, sequence & iNTRFrameWasteSequence, sequence & ioCOREGrippersSequence, variable iEjectPaddlesAfterDiscardRack, variable iTransportChoice, variable iChannelsForTransport, variable iSWAPGripDirection, variable iParkSWAP_rightSide, variable iEditBoxTitleString, variable iNTRRackDisposalChoice, variable iDialog_timeout ) void {
    private sequence dummySeq;
    private variable isSimulation;
    isSimulation = Util::GetSimulationMode();
    if (isSimulation == 1)
    {
      iNTRTipCounterName = StrConcat2(iNTRTipCounterName, Translate("_simulation"));
    }
    CheckEmptyRacksBeforeTipPickUp(iNTRTipCounterName, iNTRTipSequence, iNTRFrameWasteSequence, ioCOREGrippersSequence, iTransportChoice, iChannelsForTransport, ML_STAR, 0, dummySeq, Translate("mph"), iNTRRackDisposalChoice, iEditBoxTitleString, iEjectPaddlesAfterDiscardRack, iDialog_timeout, iSWAPGripDirection, iParkSWAP_rightSide);
  }

  private function A_DefineCustomizedTipManagement_db_path( variable & db_fullPath ) void {
    private variable path_system;
    db_fullPath = 0;
    path_system = FilGetSystemPath();
    db_fullPath = StrConcat2(path_system, Translate("\\CustomizedTipManagement.mdb"));
  }

  private function _Analyze_Seq_to_build_NTR_GUI( sequence & iPlateStack_seq, device & ML_STAR, variable iSeqSortChoice, variable indivColumnsEditing, variable pipetting_tool, variable iNTRTipCounter ) void {
    private variable track_start;
    private variable str_tmp;
    private variable numberOfTipRacksInModule;
    private variable NumberOfCarriers;
    private variable lib_path;
    private variable strTrace;
    private variable Visual_NTR_library_path;
    private variable str1;
    private variable asp_angle;
    private variable str2;
    private variable sql_statement;
    private variable track_end;
    private variable seq_sort_file2;
    private variable car_tracks;
    private variable arr_size;
    private variable tmp_x;
    private variable asp_pos_id;
    private variable Visual_NTR_varstxt_path;
    private variable tmp_y;
    private variable LogfilePath;
    private variable loopCounter1;
    private variable tmpVal;
    private variable str;
    private variable seq_sort_file;
    private variable loopCounter2;
    private variable asp_y_coord;
    private variable asp_x_coord;
    private variable str_separator;
    private variable asp_z_coord;
    private variable loopCounter6;
    private file seq_sort;
    private file vars_file;
    private variable arr_racks_x[];
    private variable arr_racks_y[];
    private variable arr_carrier_indexes[];
    private variable arr_carrier_tracks[];
    private sequence horizontalSeq;
    private variable NumOfNTRStacks;
    private variable tipsPerTier;
    private variable tipsPerColumn;
    private variable labID;
    private variable column_counter;
    private variable stack_counter;
    private variable currentPosition;
    private variable layer_counter;
    private variable positions_added_in_tier;
    private variable loopCounter12;
    private variable current_column;
    private variable tips_per_rack;
    private variable strPosition;
    private variable seqName;
    private variable tipsPerRow;
    private variable current_row;
    private variable row_counter;
    private variable loopCounter_pos;
    private variable new_plate;
    private variable total_plates_in_sequence;
    private variable loopCounter_plateStackSeq;
    private variable current_x;
    private variable number_of_stack_modules;
    private variable posID;
    private variable carrier_index;
    private variable num_plates_per_stack_module;
    private variable labID2;
    private variable asp_lab_id;
    private variable num_pos_per_plate;
    private variable arr_getSeq_LabIDs[];
    private variable arr_labIDs[];
    private variable arr_putSeq_LabIDs[];
    private variable array_posIDs_onePlate[];
    private sequence iNTR_seq;
    private variable firstStack_x;
    private variable firstStack_y;
    private variable all_stacks_tracked;
    private variable carrier_y;
    private variable carrier_z;
    private variable var_carrier_out;
    private variable var_return;
    private variable var_site_id;
    private variable carrier_ang;
    private variable carrier_x;
    MECC::TraceComment(Translate("-----> Visual NTR library v1.46  <----"));
    TrcTrace(Translate("------------------------ Parameters summary ---------------------"), Translate(""));
    seqName = SeqGetName(iNTR_seq);
    TrcTrace(Translate("---------------------------- Tip Sequence = "), seqName);
    TrcTrace(Translate("---------------------------- Tip Counter = "), iNTRTipCounter);
    if (indivColumnsEditing == 1)
    {
      TrcTrace(Translate("---------------------------- Column Selection  = "), Translate(" Allowed"));
    }
    else
    {
      TrcTrace(Translate("---------------------------- Column Selection = "), Translate(" NOT allowed"));
    }
    if (iSeqSortChoice == 1)
    {
      TrcTrace(Translate("---------------------------- Sorting = "), Translate(" whole tier columns "));
    }
    else
    {
      TrcTrace(Translate("---------------------------- Sorting = "), Translate(" rack columns "));
    }
    if (pipetting_tool == "mph")
    {
      TrcTrace(Translate("---------------------------- Pipetting tool =  "), Translate("MPH"));
    }
    if (pipetting_tool == "chn")
    {
      TrcTrace(Translate("---------------------------- Pipetting tool =  "), Translate("Channels"));
    }
    arr_racks_x.SetSize(0);
    arr_racks_y.SetSize(0);
    arr_carrier_tracks.SetSize(0);
    arr_carrier_indexes.SetSize(0);
    array_posIDs_onePlate.SetSize(0);
    SeqGetLabwareIds(iPlateStack_seq, arr_labIDs);
    iPlateStack_seq.SetCurrentPosition(1);
    HSL_GetNumOfDefPosInRack::GetNumOfDefPosInRack(ML_STAR, iPlateStack_seq, num_pos_per_plate);
    if(0){
      iPlateStack_seq.SetCurrentPosition(1);
      labID = SeqGetLabwareId(iPlateStack_seq);
      new_plate = 0;
      {
        loopCounter_plateStackSeq = 0;
        while (1 == 1)
        {
          loopCounter_plateStackSeq = loopCounter_plateStackSeq + 1;
          posID = SeqGetPositionId(iPlateStack_seq);
          array_posIDs_onePlate.AddAsLast(posID);
          SeqIncrement(iPlateStack_seq, 1);
          if (posID == "1")
          {
            new_plate = 1;
          }
          if (posID == "")
          {
            new_plate = 1;
          }
          if (new_plate == 1)
          {
            if (loopCounter_plateStackSeq > 1)
            {
              labID2 = SeqGetLabwareId(iPlateStack_seq);
              if (labID != labID2)
              {
                num_pos_per_plate = loopCounter_plateStackSeq - 0;
                break;
              }
            }
          }
        }
      }
    }
    total_plates_in_sequence=arr_labIDs.GetSize();
    arr_putSeq_LabIDs.SetSize(total_plates_in_sequence);
    LogfilePath = FilGetLogFilesPath();
    seq_sort_file = StrConcat4(LogfilePath, Translate("\\"), Translate("TemporaryFileForSorting.xls"), Translate(""));
    if(0){
      seq_sort_file2 = StrConcat4(LogfilePath, Translate("\\"), Translate("TemporaryFileForSorting2.xls"), Translate(""));
    }
    HSLMapReport::DeleteFile(seq_sort_file);
    if(0){
      HSLMapReport::DeleteFile(seq_sort_file2);
    }
    seq_sort.AddField("asp_lab_id", asp_lab_id, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslInteger);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    {
      for(loopCounter_plateStackSeq = 0; loopCounter_plateStackSeq < total_plates_in_sequence;)
      {
        loopCounter_plateStackSeq = loopCounter_plateStackSeq + 1;
        asp_lab_id=arr_labIDs.GetAt(loopCounter_plateStackSeq-1);
        DevGetLabwarePositionEx(ML_STAR, asp_lab_id, Translate("1"), asp_x_coord, asp_y_coord, asp_z_coord, asp_angle);
        if( 0 == seq_sort.WriteRecord() )
        {
              MECC::RaiseRuntimeError(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    arr_getSeq_LabIDs.SetSize(0);
    sql_statement = "SELECT * FROM sheet1 ORDER BY asp_z_coord DESC, asp_lab_id ASC, asp_x_coord ASC, asp_y_coord DESC";
    seq_sort.AddField("asp_lab_id", asp_lab_id, hslString, 255);
    seq_sort.AddField("asp_pos_id", asp_pos_id, hslInteger);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, sql_statement) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    carrier_index = 0;
    number_of_stack_modules = 0;
    num_plates_per_stack_module = 1;
    current_x = 0;
    {
      loopCounter2 = 0;
      while (
         (seq_sort.Eof() == 0)
      )
      {
        loopCounter2 = loopCounter2 + 1;
        if( 0 == seq_sort.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (loopCounter2 == 1)
        {
          firstStack_x = asp_x_coord;
          firstStack_y = asp_y_coord;
          all_stacks_tracked = 0;
        }
        else
        {
          if(asp_y_coord == firstStack_y && asp_x_coord == firstStack_x){
            all_stacks_tracked=1;
            num_plates_per_stack_module = num_plates_per_stack_module + 1;
          }
        }
        if (all_stacks_tracked == 0)
        {
          number_of_stack_modules = number_of_stack_modules + 1;
          arr_racks_y.AddAsLast(asp_y_coord);
          if (asp_x_coord != current_x)
          {
            carrier_index = carrier_index + 1;
            current_x = asp_x_coord;
          }
          arr_racks_x.AddAsLast(asp_x_coord);
          arr_carrier_indexes.AddAsLast(carrier_index);
          track_start = 0;
          track_end = 0;
          var_return = GetCarrierIDandSiteID_FromLabID(ML_STAR, asp_lab_id, var_carrier_out, var_site_id);
          DevGetLabwarePosition(ML_STAR, var_carrier_out, carrier_x, carrier_y, carrier_z, carrier_ang);
          //track_start = ((asp_x_coord-117.9)/22.5) + 1;
          track_start = (Ceiling(((carrier_x - 100)/ 22.5), 0) + 1);
          track_end = track_start  + 5;
          if(0){
            track_start = MthCeiling(track_start);
            track_end = MthCeiling(track_end);
          }
          str = StrConcat4(Translate("Tracks "), track_start, Translate(" to "), track_end);
          arr_carrier_tracks.AddAsLast(str);
          if(0){
            Trace ("-- Recorded X=" ,asp_x_coord, "    Y=", asp_y_coord);
          }
        }
        arr_getSeq_LabIDs.AddAsLast(asp_lab_id);
        if(0){
          Trace ("* Current rack  :" , asp_lab_id);
        }
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    NumOfNTRStacks = number_of_stack_modules;
    tips_per_rack = num_pos_per_plate;
    numberOfTipRacksInModule = num_plates_per_stack_module;
    TrcTrace(Translate("----- Total number of tip racks in the sequence ="), total_plates_in_sequence);
    TrcTrace(Translate("----- Total number of stacks ="), number_of_stack_modules);
    TrcTrace(Translate("----- Total number of positions per tip rack ="), num_pos_per_plate);
    TrcTrace(Translate("----- Total number of layers per stack tower ="), num_plates_per_stack_module);
    NumberOfCarriers=arr_carrier_indexes.GetAt(number_of_stack_modules-1);
    TrcTrace(Translate("----- Total Carriers = "), NumberOfCarriers);
    lib_path = FilGetLibraryPath();
    Visual_NTR_library_path = StrConcat2(lib_path, Translate("\\Visual_NTR_library\\"));
    Visual_NTR_varstxt_path = StrConcat4(LogfilePath, Translate("\\VisualNTR_"), iNTRTipCounter, Translate(".txt"));
    str = Translate("");
    arr_size=arr_racks_x.GetSize();
    {
      for(loopCounter6 = 0; loopCounter6 < arr_size;)
      {
        loopCounter6 = loopCounter6 + 1;
        tmp_x=arr_racks_x.GetAt(loopCounter6-1);
        tmp_y=arr_racks_y.GetAt(loopCounter6-1);
        tmpVal=arr_carrier_indexes.GetAt(loopCounter6-1);
        car_tracks=arr_carrier_tracks.GetAt(loopCounter6-1);
        str1 = StrFStr(tmp_x);
        str2 = StrFStr(tmp_y);
        if (loopCounter6 == arr_size)
        {
          str_separator = Translate("");
        }
        else
        {
          str_separator = Translate("//");
        }
        str_tmp = StrConcat8(str1, Translate(","), str2, Translate(","), tmpVal, Translate(","), car_tracks, str_separator);
        str = StrConcat2(str, str_tmp);
        if(0){
          strTrace = StrConcat12(Translate("-----------------------------------------------------------------"), Translate("x= "), str1, Translate(" // y= "), str2, Translate("// Number of Layers= "), numberOfTipRacksInModule, Translate(" // "), car_tracks, Translate(" // Carrier Index = "), tmpVal, Translate(""));
        }
      }
    }
    vars_file.AddField(1, str, hslString);
    vars_file.SetDelimiter(hslAsciiText);
    if( 0 == vars_file.Open(Visual_NTR_varstxt_path, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, Visual_NTR_varstxt_path, "HxMetEdCompCmd");
    }
    if( 0 == vars_file.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    str = Translate("\n");
    if( 0 == vars_file.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    NumOfNTRStacks = arr_size;
    str = StrConcat12(tips_per_rack, Translate(","), numberOfTipRacksInModule, Translate(","), NumOfNTRStacks, Translate(","), NumberOfCarriers, Translate(","), pipetting_tool, Translate(","), iSeqSortChoice, Translate(","));
    str = StrConcat4(str, indivColumnsEditing, Translate(""), Translate(""));
    if( 0 == vars_file.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != vars_file.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    vars_file.RemoveFields();
    if(0){
      TrcTrace(Translate("Total NTR stacks = "), arr_size);
      TrcTrace(Translate("Total layers in full sequence = "), numberOfTipRacksInModule);
      TrcTrace(Translate("Total Carriers = "), NumberOfCarriers);
      TrcTrace(Translate("Total tips per rack = "), tips_per_rack);
    }
    SeqRemoveAll(iPlateStack_seq);
    {
      for(loopCounter1 = 0; loopCounter1 < total_plates_in_sequence;)
      {
        loopCounter1 = loopCounter1 + 1;
        labID=arr_getSeq_LabIDs.GetAt(loopCounter1-1);
        {
          for(loopCounter_pos = 0; loopCounter_pos < num_pos_per_plate;)
          {
            loopCounter_pos = loopCounter_pos + 1;
            posID = StrIStr(loopCounter_pos);
            SeqAdd(iPlateStack_seq, labID, posID);
          }
        }
      }
    }
    iPlateStack_seq.SetCurrentPosition(1);
    if (iSeqSortChoice == 1)
    {
      MECC::TraceComment(Translate("Sort sequence by tier"));
      SeqCopySequence(horizontalSeq, iPlateStack_seq);
      SeqRemoveAll(iPlateStack_seq);
      tipsPerTier = NumOfNTRStacks * tips_per_rack;
      if (tips_per_rack == 384)
      {
        tipsPerColumn = 16;
      }
      if (tips_per_rack == 96)
      {
        tipsPerColumn = 8;
      }
      currentPosition = 0;
      {
        for(layer_counter = 0; layer_counter < numberOfTipRacksInModule;)
        {
          layer_counter = layer_counter + 1;
          positions_added_in_tier = 0;
          current_column = 0;
          {
            loopCounter12 = 0;
            while (positions_added_in_tier < tipsPerTier)
            {
              loopCounter12 = loopCounter12 + 1;
              current_column = current_column + 1;
              {
                for(stack_counter = 0; stack_counter < NumOfNTRStacks;)
                {
                  stack_counter = stack_counter + 1;
                  currentPosition = 1+ ((current_column-1)*tipsPerColumn) + ((stack_counter-1)*tips_per_rack) + (tips_per_rack*NumOfNTRStacks*(layer_counter-1));
                  horizontalSeq.SetCurrentPosition(currentPosition);
                  labID = SeqGetLabwareId(horizontalSeq);
                  {
                    for(column_counter = 0; column_counter < tipsPerColumn;)
                    {
                      column_counter = column_counter + 1;
                      strPosition = Translate("1");
                      strPosition = StrIStr(column_counter + ((current_column-1)*tipsPerColumn));
                      SeqAdd(iPlateStack_seq, labID, strPosition);
                      positions_added_in_tier = positions_added_in_tier + 1;
                    }
                  }
                }
              }
            }
          }
        }
      }
    }
    if (indivColumnsEditing == 2)
    {
      SeqCopySequence(horizontalSeq, iPlateStack_seq);
      SeqRemoveAll(iPlateStack_seq);
      tipsPerTier = NumOfNTRStacks * tips_per_rack;
      if (tips_per_rack == 384)
      {
        tipsPerRow = 24;
        tipsPerColumn = 16;
      }
      if (tips_per_rack == 96)
      {
        tipsPerRow = 12;
        tipsPerColumn = 8;
      }
      currentPosition = 0;
      {
        for(layer_counter = 0; layer_counter < numberOfTipRacksInModule;)
        {
          layer_counter = layer_counter + 1;
          positions_added_in_tier = 0;
          current_row = 0;
          {
            loopCounter12 = 0;
            while (positions_added_in_tier < tipsPerTier)
            {
              loopCounter12 = loopCounter12 + 1;
              current_row = current_row + 1;
              {
                for(stack_counter = 0; stack_counter < NumOfNTRStacks;)
                {
                  stack_counter = stack_counter + 1;
                  currentPosition = 1+ ((stack_counter-1)*tips_per_rack) + (tips_per_rack*NumOfNTRStacks*(layer_counter-1));
                  horizontalSeq.SetCurrentPosition(currentPosition);
                  labID = SeqGetLabwareId(horizontalSeq);
                  strPosition = Translate("1");
                  {
                    for(column_counter = 0; column_counter < tipsPerColumn;)
                    {
                      column_counter = column_counter + 1;
                      {
                        for(row_counter = 0; row_counter < tipsPerRow;)
                        {
                        row_counter = row_counter + 1;
                        strPosition = StrIStr((column_counter)+(tipsPerColumn*(row_counter-1)));
                        SeqAdd(iPlateStack_seq, labID, strPosition);
                        positions_added_in_tier = positions_added_in_tier + 1;
                        }
                      }
                    }
                  }
                }
              }
            }
          }
        }
      }
    }
  }

  private function Show_NTR_Editor( sequence & seq, variable iNTRTipCounter, variable iMessage, variable iDialog_Timeout ) variable {
    private variable lib_path;
    private variable Visual_NTR_library_path;
    private variable str_cmd;
    private variable VisualNTR_exe_path;
    private variable currentPosition;
    private variable str;
    private variable Visual_NTR_currentPosFile;
    private file pos_file;
    private variable LogfilePath;
    private variable currentLayer;
    LogfilePath = FilGetLogFilesPath();
    lib_path = FilGetLibraryPath();
    Visual_NTR_library_path = StrConcat2(lib_path, Translate("\\Visual_NTR_library\\"));
    VisualNTR_exe_path = StrConcat4(Translate(""), Visual_NTR_library_path, Translate("Visual_NTR_Editor.exe"), Translate(""));
    Visual_NTR_currentPosFile = StrConcat4(LogfilePath, Translate("\\VisualNTR_"), iNTRTipCounter, Translate("_firstPosUsedInTier.txt"));
    currentPosition = seq.GetCurrentPosition();
    if (currentPosition == 0)
    {
      currentPosition = 1;
    }
    if (iDialog_Timeout > 0)
    {
      str_cmd = StrConcat4(VisualNTR_exe_path, Translate(" \""), LogfilePath, Translate("\""));
      str_cmd = StrConcat4(str_cmd, Translate(" \"VisualNTR_"), iNTRTipCounter, Translate("\""));
      str_cmd = StrConcat4(str_cmd, Translate(" \""), currentPosition, Translate("\""));
      str_cmd = StrConcat4(str_cmd, Translate(" \""), iMessage, Translate("\""));
      str_cmd = StrConcat4(str_cmd, Translate(" \""), iDialog_Timeout, Translate("\""));
      TrcTrace(Translate("--- Launching GUI with current Position="), currentPosition);
      {
        if( 0 == Shell(str_cmd, hslShow, hslSynchronous) )
        {
              MECC::RaiseRuntimeErrorEx(-1238499072, MECC::IDS::stepNameShell, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      TrcTrace(Translate("--- GUI closed"), Translate(""));
      pos_file.AddField(1, str, hslString);
      pos_file.SetDelimiter(hslAsciiText);
      if( 0 == pos_file.Open(Visual_NTR_currentPosFile, hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, Visual_NTR_currentPosFile, "HxMetEdCompCmd");
      }
      if( 0 == pos_file.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 != pos_file.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      pos_file.RemoveFields();
      currentPosition = StrIVal(str);
    }
    else
    {
      str = StrIStr(currentPosition);
      pos_file.AddField(1, str, hslString);
      pos_file.SetDelimiter(hslAsciiText);
      if( 0 == pos_file.Open(Visual_NTR_currentPosFile, hslWrite) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, Visual_NTR_currentPosFile, "HxMetEdCompCmd");
      }
      if( 0 == pos_file.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 != pos_file.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      pos_file.RemoveFields();
    }
    seq.SetCurrentPosition(currentPosition);
    StoreRackTossPosition(currentPosition, iNTRTipCounter);
    Tip_Counter_Write_Internal(seq, iNTRTipCounter, currentLayer);
    currentPosition = seq.GetCurrentPosition();
    return (currentPosition);
  }

  private function Read_Vars_for_NTRSeq( variable iNTRTipCounter, variable & num_of_stacks, variable & tips_per_rack, variable & num_of_tiers, variable & firstPosUsedInTier, variable & sortByTier, variable & indivColumnSelection ) void {
    private variable lib_path;
    private variable Visual_NTR_varstxt_path;
    private variable str;
    private file vars_file;
    private variable array_of_vars[];
    private variable LogfilePath;
    private variable Visual_NTR_currentPosFile;
    private file pos_file;
    num_of_stacks = 0;
    tips_per_rack = 0;
    num_of_tiers = 0;
    firstPosUsedInTier = 0;
    sortByTier = 0;
    indivColumnSelection = 0;
    LogfilePath = FilGetLogFilesPath();
    lib_path = FilGetLibraryPath();
    Visual_NTR_varstxt_path = StrConcat4(LogfilePath, Translate("\\VisualNTR_"), iNTRTipCounter, Translate(".txt"));
    Visual_NTR_currentPosFile = StrConcat4(LogfilePath, Translate("\\VisualNTR_"), iNTRTipCounter, Translate("_firstPosUsedInTier.txt"));
    vars_file.AddField(1, str, hslString);
    vars_file.SetDelimiter(hslAsciiText);
    if( 0 == vars_file.Open(Visual_NTR_varstxt_path, hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, Visual_NTR_varstxt_path, "HxMetEdCompCmd");
    }
    if( 0 == vars_file.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == vars_file.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != vars_file.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    vars_file.RemoveFields();
    StrTokenize(str, Translate(","), array_of_vars, 0);
    num_of_stacks=array_of_vars.GetAt(3-1);
    num_of_tiers=array_of_vars.GetAt(2-1);
    tips_per_rack=array_of_vars.GetAt(1-1);
    sortByTier=array_of_vars.GetAt(6-1);
    indivColumnSelection=array_of_vars.GetAt(7-1);
    num_of_stacks = StrIVal(num_of_stacks);
    tips_per_rack = StrIVal(tips_per_rack);
    num_of_tiers = StrIVal(num_of_tiers);
    indivColumnSelection = StrIVal(indivColumnSelection);
    sortByTier = StrIVal(sortByTier);
    pos_file.AddField(1, str, hslString);
    pos_file.SetDelimiter(hslAsciiText);
    if( 0 == pos_file.Open(Visual_NTR_currentPosFile, hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, Visual_NTR_currentPosFile, "HxMetEdCompCmd");
    }
    if( 0 == pos_file.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != pos_file.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    pos_file.RemoveFields();
    firstPosUsedInTier = StrIVal(str);
  }

  private function StrTokenize( variable strIn, variable strDelimiter, variable & arrTokens[], variable bAttendEmptyTokens ) void {
    private variable strEdit;
    private variable posLast;
    private variable strToAdd;
    private variable posCurrent;
    posCurrent = -1;
    posLast = -1;
    strToAdd = "";
    strEdit = strIn;
    if( StrGetLength(strEdit) == 0 || StrGetLength(strDelimiter) == 0 )
       return;
    posLast = StrGetLength(strEdit);
    posCurrent = StrFind(strEdit, strDelimiter);
    while (-1 != posCurrent && posLast > 0)
    {
         //get tokens before next delimiter char
         strToAdd = StrLeft(strEdit, posCurrent);
         StrTrimRight(strToAdd, "");
         StrTrimLeft (strToAdd, "");
         //add token to our output list
         if( StrGetLength(strToAdd) > 0 )
         {
              arrTokens.AddAsLast(strToAdd);
             // Trace(GetFunctionName(), " adding string to output list: $", strToAdd, "$", "" );
         }
         else
         {
              if( bAttendEmptyTokens )// empty string should also be added
              {
                   arrTokens.AddAsLast(strToAdd);
                   //Trace(GetFunctionName(), " adding string to output list: $", strToAdd, "$", "" );
              }
         }
         //prepare next loop by removing obsolete characters
         strEdit = StrRight(strEdit, posLast - posCurrent - StrGetLength(strDelimiter) );
         //Trace(GetFunctionName(), " next string = ", strEdit );
         //find next "non-delimiter"
         posCurrent = StrFind(strEdit, strDelimiter);
         posLast = StrGetLength(strEdit);
         //Trace(GetFunctionName(), " next pos = ", posCurrent );
    }//end while
    //no delimiter left
    //add the last part of the string to our output list
    if (-1 == posCurrent)// && posLast > 0
    {
         if( posLast == 0 && !bAttendEmptyTokens )
            return;
         StrTrimRight(strEdit, "");
         StrTrimLeft (strEdit, "");
         //Trace(GetFunctionName(), " no delimiter left - adding string to output list: $", strEdit, "$", "" );
         arrTokens.AddAsLast(strEdit);
    }
  }

  private function CalculateCurrentStackAndTipsLeftinLayer( sequence iNTRTipSeq, variable total_stacks, variable NumOfLayersPerStack, variable num_of_tips_per_rack, variable indivColumnSelection, variable sortByTier, variable & currentStack, variable & currentLayer, variable & tips_remaining_in_currentRack, variable & tips_remaining_in_currentLayer, variable & selectedCel ) void {
    private variable currentPosition;
    private variable tmp_pos;
    private variable cells_per_layer;
    private variable selectedColumn;
    private variable tmpVal;
    private variable tipsPerColumn;
    private variable tipsPerRow;
    currentStack = 0;
    currentLayer = 0;
    tips_remaining_in_currentRack = 0;
    tips_remaining_in_currentLayer = 0;
    selectedCel = 0;
    currentPosition = iNTRTipSeq.GetCurrentPosition();
    cells_per_layer = 0;
    tmp_pos = 0;
    tmpVal = 0;
    selectedCel = 0;
    selectedColumn = 0;
    if (num_of_tips_per_rack == 96)
    {
      tipsPerColumn = 8;
      tipsPerRow = 12;
    }
    if (num_of_tips_per_rack == 384)
    {
      tipsPerColumn = 16;
      tipsPerRow = 24;
    }
         cells_per_layer = num_of_tips_per_rack*total_stacks;
         tmpVal = (currentPosition + cells_per_layer) % cells_per_layer;
         currentLayer = currentPosition/cells_per_layer;
         if(tmpVal>0){currentLayer++;}
         if(currentLayer>NumOfLayersPerStack) {
               //the are no more tips in the tip sequence.
               currentLayer=0;
         }else{
                  if(sortByTier==0){ //Sort by individual rack column
                       //Calculate current stack
                       tmp_pos= currentPosition -((currentLayer-1)*cells_per_layer);
                       tmpVal = tmp_pos % num_of_tips_per_rack;
                       currentStack = tmp_pos/num_of_tips_per_rack;
                       if (tmpVal>0) {currentStack++;}
                       if(indivColumnSelection ==2){
                             // Calculate current cel in rack for row sorting
                            tmp_pos = tmp_pos - (num_of_tips_per_rack*(currentStack-1));
                            tmpVal = tmp_pos % tipsPerRow;
                            tmp_pos = tmp_pos / tipsPerRow;
                            if(tmpVal>0){tmp_pos++;}
                            selectedCel = tmp_pos;
                        } else{
                            // Calculate current cel in rack
                             selectedCel = tmp_pos - (num_of_tips_per_rack*(currentStack-1));
                           }
                   } else{  //Sort by tier
                         //Calculate current stack
                        tmpVal = currentPosition % tipsPerColumn;
                        currentStack = currentPosition / tipsPerColumn;
                        if(tmpVal>0) { currentStack ++;}
                        tmpVal=currentStack%total_stacks;
                        if(tmpVal==0){currentStack = total_stacks;} else {currentStack = tmpVal;}
                        // Calculate current tip position inside current rack
                        if(indivColumnSelection ==1){
                               tmp_pos= currentPosition-((currentLayer-1)*cells_per_layer);
                               tmpVal = tmp_pos % (tipsPerColumn*(total_stacks));
                               selectedColumn = tmp_pos / (tipsPerColumn*(total_stacks));
                               if(tmpVal>0) {selectedColumn++;}
                               tmpVal = currentPosition % tipsPerColumn;
                               if (tmpVal ==0) {tmpVal=tipsPerColumn;}
                               selectedCel = ((selectedColumn -1)*tipsPerColumn) + tmpVal;
                         }else{
                               //select first cel of the current rack
                               selectedCel = 1;
                         }
                   }
            //Remaining tips in the current rack and tier
               if(indivColumnSelection !=2){
                    tips_remaining_in_currentRack = num_of_tips_per_rack - selectedCel +1;
               }
               if(indivColumnSelection ==2){
                    tips_remaining_in_currentRack = num_of_tips_per_rack - ((selectedCel-1)*tipsPerRow);
               }
               //tips_remaining_in_currentLayer = tips_remaining_in_currentRack + (total_stacks-currentStack)*num_of_tips_per_rack;
               tips_remaining_in_currentLayer = cells_per_layer*currentLayer-currentPosition+1;
          }
  }

  private function StorePosition( variable position, variable iNTRTipCounter ) void {
    private variable Visual_NTR_currentPosFile;
    private variable LogfilePath;
    private variable str;
    private file pos_file;
    LogfilePath = FilGetLogFilesPath();
    Visual_NTR_currentPosFile = StrConcat4(LogfilePath, Translate("\\VisualNTR_"), iNTRTipCounter, Translate("_firstPosUsedInTier.txt"));
    pos_file.AddField(1, str, hslString);
    pos_file.SetDelimiter(hslAsciiText);
    if( 0 == pos_file.Open(Visual_NTR_currentPosFile, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, Visual_NTR_currentPosFile, "HxMetEdCompCmd");
    }
    str = StrIStr(position);
    if( 0 == pos_file.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != pos_file.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    pos_file.RemoveFields();
  }

  private function CheckEmptyRacksBeforeTipPickUp( variable iNTRTipCounterName, sequence & iNTRTipSequence, sequence & iNTRFrameWasteSequence, sequence ioCOREGrippersSequence, variable iTransportChoice, variable iChannelsForTransport, device & ML_STAR, variable iFinalRackInTier_TipDisposal, sequence & ioSeq_FinalTipInTierDestination, variable pipetting_tool, variable iNTRRackDisposalChoice, variable iMessage, variable iEjectPaddlesAfterDiscardRack, variable iDialog_timeout, variable iSWAPGripDirection, variable iParkSWAPOnRight ) void {
    private variable gripper_present;
    private variable firstPosUsedInTier;
    private variable numberOfTipsRemainingInTier;
    private variable currentStack;
    private variable numberOfTipsRemainingInRack;
    private variable eject_grippers;
    private variable calculatedRackTossPosition;
    private variable tipsPerColumn;
    private variable loopCounter1;
    private variable num_of_tips_per_rack;
    private variable currentLayer;
    private variable num_of_tiers;
    private variable currentNTRSeqPosition;
    private variable NumOfNTRStacks;
    private variable num_of_racks_to_discard;
    private variable tipsRemainingThreshold;
    private variable numOfChannelsInstalled;
    private variable needToReload;
    private variable indivColumnSelection;
    private variable sortByTier;
    private variable calculateRacksToDiscard;
    private variable total;
    private variable loopCounter2;
    private variable currentTipPosInRack;
    private variable tipsPerRow;
    private variable dummy;
    private variable lastRackTossSeqPosition;
    private variable calculatedStackToDiscard;
    private variable calculatedLayerToDiscard;
    private variable calculatedRackToDiscard_remainingTips;
    private variable calculatedLayerToDiscard_remainingTips;
    private variable newTempEndPositionForThisLayer;
    private variable endPosition;
    private variable LastStored_currentLayer;
    private variable LastStored_currentSeqPosition;
    private variable nextAvailableLayer;
    needToReload = 1;
    {
      loopCounter2 = 0;
      while (needToReload == 1)
      {
        loopCounter2 = loopCounter2 + 1;
        Read_Vars_for_NTRSeq(iNTRTipCounterName, NumOfNTRStacks, num_of_tips_per_rack, num_of_tiers, firstPosUsedInTier, sortByTier, indivColumnSelection);
        Read_RackTossStoredPosition(lastRackTossSeqPosition, iNTRTipCounterName);
        LastStored_currentSeqPosition = NTR_Tip_Counter_Read(iNTRTipSequence, iNTRTipCounterName, endPosition, LastStored_currentLayer);
        iNTRTipSequence.SetCount(endPosition);
        if(0){
          TrcTrace(Translate(" THE REAL END POSITION IS "), endPosition);
        }
        if (num_of_tips_per_rack == 384)
        {
          tipsPerColumn = 16;
          tipsPerRow = 24;
        }
        if (num_of_tips_per_rack == 96)
        {
          tipsPerColumn = 8;
          tipsPerRow = 12;
        }
        currentNTRSeqPosition = iNTRTipSequence.GetCurrentPosition();
        if (currentNTRSeqPosition == 0)
        {
          if (LastStored_currentLayer < num_of_tiers)
          {
            nextAvailableLayer = LastStored_currentLayer + 1;
            CalculateAbsoluteSeqPosition(1, nextAvailableLayer, 1, sortByTier, NumOfNTRStacks, num_of_tiers, num_of_tips_per_rack, currentNTRSeqPosition, indivColumnSelection);
            iNTRTipSequence.SetCurrentPosition(currentNTRSeqPosition);
            iNTRTipSequence.SetCount(endPosition);
          }
        }
        total = SeqGetTotal(iNTRTipSequence);
        TrcTrace(Translate("---- The current position of the NTR tip sequence is "), currentNTRSeqPosition);
        if (currentNTRSeqPosition == 0)
        {
          needToReload = 1;
        }
        else
        {
          needToReload = 0;
          if (pipetting_tool == "chn")
          {
            numOfChannelsInstalled = DevGetCfgValueWithKey(ML_STAR, 1);
            tipsRemainingThreshold = numOfChannelsInstalled;
          }
          else
          {
            if (indivColumnSelection == 0)
            {
              tipsRemainingThreshold = num_of_tips_per_rack;
            }
            if (indivColumnSelection == 1)
            {
              tipsRemainingThreshold = tipsPerColumn;
            }
            if (indivColumnSelection == 2)
            {
              tipsRemainingThreshold = tipsPerRow;
            }
          }
          CalculateCurrentStackAndTipsLeftinLayer(iNTRTipSequence, NumOfNTRStacks, num_of_tiers, num_of_tips_per_rack, indivColumnSelection, sortByTier, currentStack, currentLayer, numberOfTipsRemainingInRack, numberOfTipsRemainingInTier, currentTipPosInRack);
          iNTRTipSequence.SetCurrentPosition(lastRackTossSeqPosition);
          if(0){
            TrcTrace(Translate("TOSS = "), lastRackTossSeqPosition);
          }
          CalculateCurrentStackAndTipsLeftinLayer(iNTRTipSequence, NumOfNTRStacks, num_of_tiers, num_of_tips_per_rack, indivColumnSelection, sortByTier, calculatedStackToDiscard, calculatedLayerToDiscard, calculatedRackToDiscard_remainingTips, calculatedLayerToDiscard_remainingTips, dummy);
          iNTRTipSequence.SetCurrentPosition(currentNTRSeqPosition);
          if (sortByTier == 1)
          {
            if(0){
              TrcTrace4(Translate("  Current Layer ="), currentLayer, Translate("   //// CAlculated layer to discard ="), calculatedLayerToDiscard);
              TrcTrace4(Translate("  ToDiscardRemainingTips ="), calculatedRackToDiscard_remainingTips, Translate("   //// tipspercolumn ="), tipsPerColumn);
            }
            if( calculatedLayerToDiscard_remainingTips>= (NumOfNTRStacks*tipsPerColumn)){
              calculatedStackToDiscard=1;}
            if(0){
              if (calculatedRackToDiscard_remainingTips > tipsPerColumn)
              {
                calculatedLayerToDiscard = currentLayer;
                calculatedStackToDiscard = 1;
              }
            }
          }
          TrcTrace4(Translate("Remaining tips in Tip Rack="), numberOfTipsRemainingInRack, Translate(";;;;;;;Remaining Tips in Tier="), numberOfTipsRemainingInTier);
          calculateRacksToDiscard = 0;
          if (iNTRRackDisposalChoice == 2)
          {
            calculateRacksToDiscard = 1;
          }
          else
          {
            if (currentLayer > calculatedLayerToDiscard)
            {
              calculateRacksToDiscard = 1;
            }
            else
            {
              if (currentStack > calculatedStackToDiscard)
              {
                if (iNTRRackDisposalChoice == 0)
                {
                  if (currentLayer < num_of_tiers)
                  {
                    calculateRacksToDiscard = 1;
                  }
                }
              }
              if (numberOfTipsRemainingInTier < tipsRemainingThreshold)
              {
                TrcTrace(Translate("------HEY there are not enough tips in tier ---"), Translate(""));
                if (1 == 1)
                {
                  if (iFinalRackInTier_TipDisposal == 1)
                  {
                    DiscardTipsWithChannels(iNTRTipSequence, numberOfTipsRemainingInTier, ML_STAR, numOfChannelsInstalled, ioSeq_FinalTipInTierDestination);
                  }
                  else
                  {
                    SeqIncrement(iNTRTipSequence, numberOfTipsRemainingInTier);
                  }
                  if (currentLayer < num_of_tiers)
                  {
                    currentNTRSeqPosition = iNTRTipSequence.GetCurrentPosition();
                    currentStack = 1;
                    currentLayer = currentLayer + 1;
                    calculateRacksToDiscard = 1;
                  }
                  else
                  {
                    needToReload = 1;
                  }
                }
                else
                {
                  if (currentLayer == num_of_tiers)
                  {
                    if (iFinalRackInTier_TipDisposal == 1)
                    {
                      DiscardTipsWithChannels(iNTRTipSequence, numberOfTipsRemainingInTier, ML_STAR, numOfChannelsInstalled, ioSeq_FinalTipInTierDestination);
                    }
                    else
                    {
                      SeqIncrement(iNTRTipSequence, numberOfTipsRemainingInTier);
                    }
                    needToReload = 1;
                  }
                }
              }
            }
          }
          if (calculateRacksToDiscard == 1)
          {
            if (currentLayer == calculatedLayerToDiscard)
            {
              num_of_racks_to_discard = currentStack - calculatedStackToDiscard;
              if (num_of_racks_to_discard == 0)
              {
                num_of_racks_to_discard = 1;
              }
            }
            else
            {
              num_of_racks_to_discard = NumOfNTRStacks - calculatedStackToDiscard;
              num_of_racks_to_discard = num_of_racks_to_discard + 1;
            }
            TrcTrace(Translate(" ******************** NUMBER of racks to discard ="), num_of_racks_to_discard);
            TrcTrace(Translate("---- Current Stack = "), currentStack);
            TrcTrace(Translate("---- first Stack to discard = "), calculatedStackToDiscard);
            TrcTrace(Translate("-------------------------------START WASTE EMPTY RACKS -------------"), Translate(""));
            {
              for(loopCounter1 = 0; loopCounter1 < num_of_racks_to_discard;)
              {
                loopCounter1 = loopCounter1 + 1;
                if (loopCounter1 > 1)
                {
                  calculatedStackToDiscard = calculatedStackToDiscard + 1;
                }
                CalculateAbsoluteSeqPosition(calculatedStackToDiscard, calculatedLayerToDiscard, 1, sortByTier, NumOfNTRStacks, num_of_tiers, num_of_tips_per_rack, calculatedRackTossPosition, indivColumnSelection);
                iNTRTipSequence.SetCurrentPosition(calculatedRackTossPosition);
                if (loopCounter1 == num_of_racks_to_discard)
                {
                  eject_grippers = iEjectPaddlesAfterDiscardRack;
                }
                else
                {
                  eject_grippers = 0;
                }
                if (loopCounter1 > 1)
                {
                  gripper_present = 1;
                }
                else
                {
                  gripper_present = 0;
                }
                NTR_to_waste_core_VENUS(ML_STAR, iNTRTipSequence, iNTRFrameWasteSequence, ioCOREGrippersSequence, gripper_present, eject_grippers, iParkSWAPOnRight, iTransportChoice, iChannelsForTransport, iSWAPGripDirection);
              }
            }
            iNTRTipSequence.SetCurrentPosition(currentNTRSeqPosition);
            iNTRTipSequence.SetCount(endPosition);
            CalculateCurrentStackAndTipsLeftinLayer(iNTRTipSequence, NumOfNTRStacks, num_of_tiers, num_of_tips_per_rack, indivColumnSelection, sortByTier, currentStack, currentLayer, numberOfTipsRemainingInRack, numberOfTipsRemainingInTier, currentTipPosInRack);
            StoreRackTossPosition(currentNTRSeqPosition, iNTRTipCounterName);
            TrcTrace(Translate("-------------------------------END WASTE EMPTY RACKS -------------"), Translate(""));
          }
        }
        if (needToReload == 1)
        {
          Show_NTR_Editor(iNTRTipSequence, iNTRTipCounterName, iMessage, iDialog_timeout);
        }
      }
    }
    Tip_Counter_Write_Internal(iNTRTipSequence, iNTRTipCounterName, currentLayer);
    currentNTRSeqPosition = iNTRTipSequence.GetCurrentPosition();
    newTempEndPositionForThisLayer = currentNTRSeqPosition + numberOfTipsRemainingInTier;
    newTempEndPositionForThisLayer = newTempEndPositionForThisLayer - 1;
    iNTRTipSequence.SetCount(newTempEndPositionForThisLayer);
    if(0){
      TrcTrace(Translate("******* //////// NEW End position = "), numberOfTipsRemainingInTier);
    }
  }

  private function CalculateAbsoluteSeqPosition( variable currentStack, variable currentLayer, variable tipPosInRack, variable sortByTier, variable NumberOfStacks, variable NumberOfLayers, variable tipsPerRack, variable & calculatedSeqPos, variable indivColumnSelection ) void {
    private variable tipsPerColumn;
    private variable tmpVal;
    private variable tmpCol;
    private variable tipsPerRow;
    calculatedSeqPos = 0;
    if (tipsPerRack == 384)
    {
      tipsPerColumn = 16;
      tipsPerRow = 24;
    }
    if (tipsPerRack == 96)
    {
      tipsPerColumn = 8;
      tipsPerRow = 12;
    }
    tmpVal = 0;
    tmpCol = 0;
        if(sortByTier==0){
                 if(indivColumnSelection!=2){
                      calculatedSeqPos = tipPosInRack + ((currentStack-1)*tipsPerRack) + ((currentLayer-1)*NumberOfStacks*tipsPerRack);
                 }
                 if(indivColumnSelection==2){
                      calculatedSeqPos = 1+ ((tipPosInRack-1)*tipsPerRow) + ((currentStack-1)*tipsPerRack) + ((currentLayer-1)*NumberOfStacks*tipsPerRack);
                 }
         }else{
                  tmpVal = tipPosInRack % tipsPerColumn;
                  tmpCol = tipPosInRack / tipsPerColumn;
                  if(tmpVal>0){tmpCol++;}
                  if(tmpVal==0){tmpVal= tipsPerColumn;}
                  calculatedSeqPos = ((currentStack -1)*tipsPerColumn) + (NumberOfStacks*tipsPerColumn*(tmpCol-1)) + ((currentLayer-1)*NumberOfStacks*tipsPerRack) + tmpVal;
         }
  }

  private function NTR_Seq_Edit( device & ML_STAR, sequence & ioNTRTipSequence, variable sortByTier, variable iSingleColumnPickup, variable pipetting_tool, variable iNTRTipCounterName, variable iEditBoxTitleString, variable iDialog_timeout ) void {
    private variable currentSeqPosition;
    private variable endPosition;
    private variable currentLayer;
    _Analyze_Seq_to_build_NTR_GUI(ioNTRTipSequence, ML_STAR, sortByTier, iSingleColumnPickup, pipetting_tool, iNTRTipCounterName);
    TrcTrace(Translate(" **** Read"), Translate(""));
    currentSeqPosition = NTR_Tip_Counter_Read(ioNTRTipSequence, iNTRTipCounterName, endPosition, currentLayer);
    ioNTRTipSequence.SetCurrentPosition(currentSeqPosition);
    TrcTrace(Translate(" **** Show NTR"), Translate(""));
    Show_NTR_Editor(ioNTRTipSequence, iNTRTipCounterName, iEditBoxTitleString, iDialog_timeout);
  }

  private function DiscardTipsWithChannels( sequence & iNTRTipSequence, variable remainingTipsInRack, device & ML_STAR, variable numOfChannelsInstalled, sequence & ioSeq_FinalTipInTierDestination ) void {
    private variable remainingPosInWasteRack;
    private variable chn_pattern;
    private variable tmpVal;
    TrcTrace(Translate("----------- START SAVING / DISCARDING REMAINING TIPS IN LAST TIER  ---------"), Translate(""));
    ChannelPattern_LeftAdjust(numOfChannelsInstalled, remainingTipsInRack, chn_pattern);
    GetNumberOfPositionsLeft(ioSeq_FinalTipInTierDestination, remainingPosInWasteRack);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    if (remainingPosInWasteRack >= remainingTipsInRack)
    {
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    else
    {
      if (remainingPosInWasteRack > 0)
      {
        ChannelPattern_LeftAdjust(numOfChannelsInstalled, remainingPosInWasteRack, chn_pattern);
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        tmpVal = numOfChannelsInstalled - remainingPosInWasteRack;
        ChannelPattern_RightAdjust(numOfChannelsInstalled, tmpVal, chn_pattern);
      }
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    TrcTrace(Translate("----------- END SAVING / DISCARDING REMAINING TIPS IN LAST TIER  ---------"), Translate(""));
  }

  function Reset_TipCounter( variable iTipCounterName ) void {
    private variable currentPosition;
    private variable db_fullPath;
    private variable sqlCommand;
    private file TIP_COUNT_UPDATE;
    private variable isSimulation;
    private variable currentLayer;
    A_DefineCustomizedTipManagement_db_path(db_fullPath);
    isSimulation = Util::GetSimulationMode();
    if (isSimulation == 1)
    {
      iTipCounterName = StrConcat2(iTipCounterName, Translate("_simulation"));
    }
    onerror goto errLabel_4 ;
    err.Clear();
    sqlCommand = StrConcat8(Translate("UPDATE [TipCounters] SET [CurrentPosition] = "), 1, Translate(" WHERE [TipCounter] = '"), iTipCounterName, Translate("'"), Translate(""), Translate(""), Translate(""));
    TIP_COUNT_UPDATE.AddField("TipCounter", iTipCounterName, hslString, 255);
    TIP_COUNT_UPDATE.AddField("CurrentPosition", currentPosition, hslInteger);
    if( 0 == TIP_COUNT_UPDATE.Open(db_fullPath + " " + "TipCounters", hslAppend, sqlCommand) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, db_fullPath, "HxMetEdCompCmd");
    }
    if( 0 != TIP_COUNT_UPDATE.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    TIP_COUNT_UPDATE.RemoveFields();
    currentLayer = 1;
    sqlCommand = StrConcat8(Translate("UPDATE [TipCounters] SET [CurrentLayer] = "), currentLayer, Translate(" WHERE [TipCounter] = '"), iTipCounterName, Translate("'"), Translate(""), Translate(""), Translate(""));
    TIP_COUNT_UPDATE.AddField("TipCounter", iTipCounterName, hslString, 255);
    TIP_COUNT_UPDATE.AddField("CurrentLayer", currentLayer, hslInteger);
    if( 0 == TIP_COUNT_UPDATE.Open(db_fullPath + " " + "TipCounters", hslAppend, sqlCommand) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, db_fullPath, "HxMetEdCompCmd");
    }
    if( 0 != TIP_COUNT_UPDATE.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    TIP_COUNT_UPDATE.RemoveFields();
    TrcTrace4(Translate("*** The Tip Counter  \""), iTipCounterName, Translate("\" has been reset to position 1 ****"), Translate(""));
    errLabel_4 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      TrcTrace4(Translate("*** The Tip Counter  \""), iTipCounterName, Translate("\" not found in db ****"), Translate(""));
    }   /* end if from skip handler if no error */
  }

  private function StoreRackTossPosition( variable position, variable iNTRTipCounter ) void {
    private variable Visual_NTR_currentPosFile;
    private variable LogfilePath;
    private variable str;
    private file pos_file;
    LogfilePath = FilGetLogFilesPath();
    Visual_NTR_currentPosFile = StrConcat4(LogfilePath, Translate("\\VisualNTR_"), iNTRTipCounter, Translate("_calculatedRackTossPos.txt"));
    pos_file.AddField(1, str, hslString);
    pos_file.SetDelimiter(hslAsciiText);
    if( 0 == pos_file.Open(Visual_NTR_currentPosFile, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, Visual_NTR_currentPosFile, "HxMetEdCompCmd");
    }
    str = StrIStr(position);
    if( 0 == pos_file.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != pos_file.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    pos_file.RemoveFields();
  }

  private function Read_RackTossStoredPosition( variable & position, variable iNTRTipCounter ) void {
    private variable Visual_NTR_currentPosFile;
    private variable LogfilePath;
    private variable str;
    private file pos_file;
    position = 0;
    LogfilePath = FilGetLogFilesPath();
    Visual_NTR_currentPosFile = StrConcat4(LogfilePath, Translate("\\VisualNTR_"), iNTRTipCounter, Translate("_calculatedRackTossPos.txt"));
    pos_file.AddField(1, str, hslString);
    pos_file.SetDelimiter(hslAsciiText);
    if( 0 == pos_file.Open(Visual_NTR_currentPosFile, hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, Visual_NTR_currentPosFile, "HxMetEdCompCmd");
    }
    if( 0 == pos_file.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != pos_file.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    pos_file.RemoveFields();
    position = StrIVal(str);
  }

  private function A_Abstract(  ) void {
  }

  private function GetNumberOfPositionsLeft( sequence seq, variable & numberOfPositionsLeft ) void {
    private variable currentPos;
    private variable endPos;
    numberOfPositionsLeft = 0;
    currentPos = seq.GetCurrentPosition();
    endPos = seq.GetCount();
    numberOfPositionsLeft = endPos - currentPos;
    numberOfPositionsLeft = numberOfPositionsLeft + 1;
  }

  private function ChannelPattern_LeftAdjust( variable iTotalNumberOfChannels, variable iNumberOfChannels, variable & oChannelPattern ) void {
    private variable strEinzen;
    private variable strNullen;
    oChannelPattern = 0;
    strEinzen = Translate("11111111111111111111111111111111");
    strNullen = Translate("00000000000000000000000000000000");
    oChannelPattern = Translate("");
    oChannelPattern= StrLeft( StrLeft(strEinzen,iNumberOfChannels) + strNullen ,iTotalNumberOfChannels);
  }

  private function ChannelPattern_RightAdjust( variable iTotalNumberOfChannels, variable iNumberOfChannels, variable & oChannelPattern ) void {
    private variable strEinzen;
    private variable strNullen;
    oChannelPattern = 0;
    strEinzen = Translate("11111111111111111111111111111111");
    strNullen = Translate("00000000000000000000000000000000");
    oChannelPattern = Translate("");
    oChannelPattern= StrRight( strNullen + StrLeft(strEinzen,iNumberOfChannels) ,iTotalNumberOfChannels);
  }

  function SortSeqToDiscardEmptyNTROnDeck( sequence i_NTRseq, variable i_SortChoice, sequence & o_WasteNTRseq, device & ML_STAR ) void {
    private variable arr_labIDs[];
    private variable total_plates_in_sequence;
    private variable asp_angle;
    private variable sql_statement;
    private variable loopCounter_plateStackSeq;
    private variable LogfilePath;
    private variable loopCounter2;
    private variable seq_sort_file;
    private variable asp_y_coord;
    private variable asp_x_coord;
    private variable asp_z_coord;
    private variable asp_lab_id;
    private file seq_sort;
    private variable arr_getSeq_LabIDs[];
    private variable arr_putSeq_LabIDs[];
    { sequence __temp; o_WasteNTRseq = __temp; }
    SeqGetLabwareIds(i_NTRseq, arr_labIDs);
    SeqRemoveAll(o_WasteNTRseq);
    total_plates_in_sequence=arr_labIDs.GetSize();
    arr_putSeq_LabIDs.SetSize(total_plates_in_sequence);
    LogfilePath = FilGetLogFilesPath();
    seq_sort_file = StrConcat4(LogfilePath, Translate("\\"), Translate("TemporaryFileForSorting.xls"), Translate(""));
    HSLMapReport::DeleteFile(seq_sort_file);
    seq_sort.AddField("asp_lab_id", asp_lab_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    {
      for(loopCounter_plateStackSeq = 0; loopCounter_plateStackSeq < total_plates_in_sequence;)
      {
        loopCounter_plateStackSeq = loopCounter_plateStackSeq + 1;
        asp_lab_id=arr_labIDs.GetAt(loopCounter_plateStackSeq-1);
        DevGetLabwarePositionEx(ML_STAR, asp_lab_id, Translate("1"), asp_x_coord, asp_y_coord, asp_z_coord, asp_angle);
        if( 0 == seq_sort.WriteRecord() )
        {
              MECC::RaiseRuntimeError(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    arr_getSeq_LabIDs.SetSize(0);
    if (i_SortChoice == 1)
    {
      sql_statement = "SELECT * FROM sheet1 ORDER BY  asp_lab_id ASC, asp_x_coord ASC, asp_z_coord ASC, asp_y_coord DESC";
    }
    if (i_SortChoice == 0)
    {
      sql_statement = "SELECT * FROM sheet1 ORDER BY asp_z_coord ASC, asp_lab_id ASC, asp_x_coord ASC, asp_y_coord DESC";
    }
    seq_sort.AddField("asp_lab_id", asp_lab_id, hslString, 255);
    seq_sort.AddField("asp_x_coord", asp_x_coord, hslFloat);
    seq_sort.AddField("asp_y_coord", asp_y_coord, hslFloat);
    seq_sort.AddField("asp_z_coord", asp_z_coord, hslFloat);
    if( 0 == seq_sort.Open(seq_sort_file + " " + "sheet1$", hslRead, sql_statement) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, seq_sort_file, "HxMetEdCompCmd");
    }
    {
      loopCounter2 = 0;
      while (
         (seq_sort.Eof() == 0)
      )
      {
        loopCounter2 = loopCounter2 + 1;
        if( 0 == seq_sort.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        SeqAdd(o_WasteNTRseq, asp_lab_id, Translate("1"));
      }
    }
    if( 0 != seq_sort.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    seq_sort.RemoveFields();
    o_WasteNTRseq.SetCurrentPosition(1);
  }

  private function LookUpValueInArray( variable & array_to_LookUp[], variable value_to_LookUp ) variable {
    private variable tmp_element;
    private variable tmp_size;
    private variable loopCounter_lookUp;
    private variable LookUp_Index;
    LookUp_Index = 0;
    tmp_size=array_to_LookUp.GetSize();
    {
      for(loopCounter_lookUp = 0; loopCounter_lookUp < tmp_size;)
      {
        loopCounter_lookUp = loopCounter_lookUp + 1;
        tmp_element=array_to_LookUp.GetAt(loopCounter_lookUp-1);
        if (tmp_element == value_to_LookUp)
        {
          LookUp_Index = loopCounter_lookUp;
        }
      }
    }
    return (LookUp_Index);
  }

  function Channels_TipCounter_Write( device & ML_STAR, sequence & iNTRTipSequence, variable iNTRTipCounterName, sequence & iNTRFrameWasteSequence, sequence & ioCOREGrippersSequence, variable iEjectPaddlesAfterDiscardRack, variable iNTRRackDisposalChoice, variable iFinalRackInTier_TipDisposal, sequence & ioSeq_FinalTipInTierDestination, variable iTransportChoice, variable iChannelsForTransport, variable iSWAPGripDirection, variable iParkSWAP_rightSide, variable iEditBoxTitleString, variable iDialog_timeout ) void {
    private variable isSimulation;
    isSimulation = Util::GetSimulationMode();
    if (isSimulation == 1)
    {
      iNTRTipCounterName = StrConcat2(iNTRTipCounterName, Translate("_simulation"));
    }
    CheckEmptyRacksBeforeTipPickUp(iNTRTipCounterName, iNTRTipSequence, iNTRFrameWasteSequence, ioCOREGrippersSequence, iTransportChoice, iChannelsForTransport, ML_STAR, iFinalRackInTier_TipDisposal, ioSeq_FinalTipInTierDestination, Translate("chn"), iNTRRackDisposalChoice, iEditBoxTitleString, iEjectPaddlesAfterDiscardRack, iDialog_timeout, iSWAPGripDirection, iParkSWAP_rightSide);
  }

  private function Tip_Counter_Write_Internal( sequence & ioTipSequence, variable iTipCounterName, variable currentLayer ) variable {
    private variable firstPosUsedInTier;
    private variable numberOfTipsRemainingInTier;
    private variable currentPosition;
    private variable currentStack;
    private variable numberOfTipsRemainingInRack;
    private variable db_fullPath;
    private variable num_of_tips_per_rack;
    private variable sqlCommand;
    private variable indivColumnSelection;
    private variable num_of_tiers;
    private variable NumOfNTRStacks;
    private variable currentTipPosInRack;
    private variable sortByTier;
    private variable endPosition;
    private file TIP_COUNT_UPDATE;
    currentPosition = ioTipSequence.GetCurrentPosition();
    if (currentPosition == 0)
    {
      currentPosition = 1;
      ioTipSequence.SetCurrentPosition(currentPosition);
    }
    endPosition = ioTipSequence.GetCount();
    Read_Vars_for_NTRSeq(iTipCounterName, NumOfNTRStacks, num_of_tips_per_rack, num_of_tiers, firstPosUsedInTier, sortByTier, indivColumnSelection);
    CalculateCurrentStackAndTipsLeftinLayer(ioTipSequence, NumOfNTRStacks, num_of_tiers, num_of_tips_per_rack, indivColumnSelection, sortByTier, currentStack, currentLayer, numberOfTipsRemainingInRack, numberOfTipsRemainingInTier, currentTipPosInRack);
    if(0){
      Trace(" +++++++++++++++++++++ currentLayer at tip write = " , currentLayer);
    }
    sqlCommand = StrConcat8(Translate("UPDATE [TipCounters] SET [CurrentPosition] = "), currentPosition, Translate(" WHERE [TipCounter] = '"), iTipCounterName, Translate("'"), Translate(""), Translate(""), Translate(""));
    A_DefineCustomizedTipManagement_db_path(db_fullPath);
    TIP_COUNT_UPDATE.AddField("TipCounter", iTipCounterName, hslString, 255);
    TIP_COUNT_UPDATE.AddField("CurrentPosition", currentPosition, hslInteger);
    if( 0 == TIP_COUNT_UPDATE.Open(db_fullPath + " " + "TipCounters", hslAppend, sqlCommand) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, db_fullPath, "HxMetEdCompCmd");
    }
    if( 0 != TIP_COUNT_UPDATE.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    TIP_COUNT_UPDATE.RemoveFields();
    sqlCommand = StrConcat8(Translate("UPDATE [TipCounters] SET [EndPosition] = "), endPosition, Translate(" WHERE [TipCounter] = '"), iTipCounterName, Translate("'"), Translate(""), Translate(""), Translate(""));
    TIP_COUNT_UPDATE.AddField("TipCounter", iTipCounterName, hslString, 255);
    TIP_COUNT_UPDATE.AddField("EndPosition", endPosition, hslInteger);
    if( 0 == TIP_COUNT_UPDATE.Open(db_fullPath + " " + "TipCounters", hslAppend, sqlCommand) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, db_fullPath, "HxMetEdCompCmd");
    }
    if( 0 != TIP_COUNT_UPDATE.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    TIP_COUNT_UPDATE.RemoveFields();
    sqlCommand = StrConcat8(Translate("UPDATE [TipCounters] SET [CurrentLayer] = "), currentLayer, Translate(" WHERE [TipCounter] = '"), iTipCounterName, Translate("'"), Translate(""), Translate(""), Translate(""));
    TIP_COUNT_UPDATE.AddField("TipCounter", iTipCounterName, hslString, 255);
    TIP_COUNT_UPDATE.AddField("CurrentLayer", currentLayer, hslInteger);
    if( 0 == TIP_COUNT_UPDATE.Open(db_fullPath + " " + "TipCounters", hslAppend, sqlCommand) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, db_fullPath, "HxMetEdCompCmd");
    }
    if( 0 != TIP_COUNT_UPDATE.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    TIP_COUNT_UPDATE.RemoveFields();
    sqlCommand = StrConcat8(Translate("UPDATE [TipCounters] SET [CurrentLayer] = "), currentLayer, Translate(" WHERE [TipCounter] = '"), iTipCounterName, Translate("'"), Translate(""), Translate(""), Translate(""));
    TIP_COUNT_UPDATE.AddField("TipCounter", iTipCounterName, hslString, 255);
    TIP_COUNT_UPDATE.AddField("CurrentLayer", currentLayer, hslInteger);
    if( 0 == TIP_COUNT_UPDATE.Open(db_fullPath + " " + "TipCounters", hslAppend, sqlCommand) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, db_fullPath, "HxMetEdCompCmd");
    }
    if( 0 != TIP_COUNT_UPDATE.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    TIP_COUNT_UPDATE.RemoveFields();
    return (currentPosition);
  }

  function GetCarrierIDandSiteID_FromLabID( device & io_instrument, variable i_labware_ID, variable & o_carrier_ID, variable & o_site_ID ) variable {
    private variable var_return;
    o_carrier_ID = 0;
    o_site_ID = 0;
    var_return = 0;
    {
        object obj_Decklayout;
        obj_Decklayout = io_instrument.GetDeckLayoutObject();
        if (!obj_Decklayout.IsNull())
            {
                  object EditDecklayout5;
                  object Parameter;
                  object LabwareObjects;
                  object LabwareNames;
                  variable Array_Keys[];
                  variable intCounter;
                  obj_Decklayout.GetObject("IEditDeckLayout5", EditDecklayout5);
                  LabwareObjects.CreateObject("HXPARAMSLib.HxPars");
                  LabwareNames.CreateObject("HXPARAMSLib.HxPars");
                  obj_Decklayout.TemplateLabwareNames(LabwareObjects);
                  Array_Keys = LabwareObjects.GetKeys();
                  for(intCounter=1; intCounter<=Array_Keys.GetSize(); intCounter++)
                  {
                      LabwareNames = LabwareObjects.Item1(intCounter);
                      if(LabwareNames.Item1("Labwr_Id") == i_labware_ID)
                      {
                          var_return = 1;
                          o_site_ID=LabwareNames.Item1("Labwr_DkSiteId");
                          o_carrier_ID=LabwareNames.Item1("Labwr_TemplateId");
                      }
                  }
                  obj_Decklayout.ReleaseObject();
                  EditDecklayout5.ReleaseObject();
                  Parameter.ReleaseObject();
           }
    }
    return (var_return);
  }
} // library namespace
