#pragma once
#include "WastePump.hsl"
#include "HSLTrcLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace WASTEPUMPCONTROLLER {
  function Initialise( variable i_strModuleName, variable i_intComPort, variable i_intTraceLevel, variable i_blnSimulationState ) variable ;
  function Start( variable i_strModuleName ) variable ;
  function Stop( variable i_strModuleName ) variable ;
  function Terminate( variable i_strModuleName ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function Start( variable i_strModuleName ) variable {
    private variable intErrorCode;
    private variable strErrorMessage;
    MECC::TraceComment(Translate("-------------------------------------------------------------------START WASTE PUMP -------------------------------------------------------"));
    intErrorCode = HSLDaisyChainedWastePump::Start(i_strModuleName);
    if (intErrorCode > 0)
    {
      strErrorMessage = HSLDaisyChainedWastePump::EvaluateErrorMessage(intErrorCode);
      TrcTrace(Translate("Error Message : "), strErrorMessage);
    }
    return (intErrorCode);
  }

  function Initialise( variable i_strModuleName, variable i_intComPort, variable i_intTraceLevel, variable i_blnSimulationState ) variable {
    private variable blnSimulationState;
    private variable intTraceLevel;
    private variable inrErrorCode;
    private variable strErrorMessage;
    MECC::TraceComment(Translate("-------------------------------------------------------------------INITIALISE WASTE PUMP -------------------------------------------------------"));
    if (i_intTraceLevel == 0)
    {
      intTraceLevel = HSLDaisyChainedWastePump::TRACE_LEVEL_NONE;
    }
    else
    {
      if (i_intTraceLevel == 1)
      {
        intTraceLevel = HSLDaisyChainedWastePump::TRACE_LEVEL_NORMAL;
      }
      else
      {
        if (i_intTraceLevel == 2)
        {
          intTraceLevel = HSLDaisyChainedWastePump::TRACE_LEVEL_FULL;
        }
        else
        {
          intTraceLevel = HSLDaisyChainedWastePump::TRACE_LEVEL_NORMAL;
        }
      }
    }
    if (i_blnSimulationState == 0)
    {
      blnSimulationState = HSLDaisyChainedWastePump::HSL_FALSE;
    }
    else
    {
      blnSimulationState = HSLDaisyChainedWastePump::HSL_TRUE;
    }
    inrErrorCode = HSLDaisyChainedWastePump::Initialize(i_strModuleName, i_intComPort, intTraceLevel, blnSimulationState);
    if (inrErrorCode > 0)
    {
      strErrorMessage = HSLDaisyChainedWastePump::EvaluateErrorMessage(inrErrorCode);
      TrcTrace(Translate("Error Message : "), strErrorMessage);
    }
    return (inrErrorCode);
  }

  function Stop( variable i_strModuleName ) variable {
    private variable intErrorCode;
    private variable strErrorMessage;
    MECC::TraceComment(Translate("-------------------------------------------------------------------STOP WASTE PUMP -------------------------------------------------------"));
    intErrorCode = HSLDaisyChainedWastePump::Stop(i_strModuleName);
    if (intErrorCode > 0)
    {
      strErrorMessage = HSLDaisyChainedWastePump::EvaluateErrorMessage(intErrorCode);
      TrcTrace(Translate("Error Message : "), strErrorMessage);
    }
    return (intErrorCode);
  }

  function Terminate( variable i_strModuleName ) void {
    MECC::TraceComment(Translate("-------------------------------------------------------------------TERMINATE WASTE PUMP -------------------------------------------------------"));
    HSLDaisyChainedWastePump::Terminate(i_strModuleName);
  }
} // library namespace
