private function CalculateOutputs(  ) void ;
private function CleanUp(  ) void ;
private function GetParams(  ) void ;
private function SaveWorklistAndMetadata(  ) void ;
private function StartUp(  ) void ;
private function pipette_dil_series( sequence & from_seq, sequence & to_seq, variable p_vol, variable m_vol, variable number_channels ) void ;
private function pipette_inducer( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable disp_to_empty ) void ;
private function pipette_media( sequence & disp_seq, variable p_vol, variable pre_wet_tips ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
}

private function pipette_dil_series( sequence & from_seq, sequence & to_seq, variable p_vol, variable m_vol, variable number_channels ) void {
  GSF_IMS_SHARED_SUBMETHODS::pipette_dil_series(from_seq, to_seq, p_vol, m_vol, number_channels, ML_STAR, ML_STAR.Tips_1000_Channels);
}

private function pipette_media( sequence & disp_seq, variable p_vol, variable pre_wet_tips ) void {
  GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from, disp_seq, p_vol, pre_wet_tips, ML_STAR.Media_pre_wet_1, ML_STAR.Media_pre_wet_2, ML_STAR, ML_STAR.Tips_1000_Channels);
}

private function CleanUp(  ) void {
  private variable loopCounter1;
  private variable array_length;
  private variable tip_counter_array[];
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        TipCount::Write2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        TipCount::Write2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        TipCount::Write2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 4)
      {
        TipCount::Write2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
}

private function CalculateOutputs(  ) void {
  private variable plasmid_C_id;
  private variable strain_1_id;
  private variable plasmid_B_id;
  private variable strain_str;
  private variable plasmid_G_id;
  private variable plasmid_F_id;
  private variable plasmid_E_id;
  private variable plasmid_str;
  private variable plasmid_D_id;
  private variable prop_arr[];
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "inducer_conc", 0);
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "additive_conc", 0);
  strain_str = "strain";
  plasmid_str = "plasmid";
  SeqSetPropertyRange(ML_STAR.strain_blank, 1, 24, strain_str, Translate("none"));
  SeqSetPropertyRange(ML_STAR.strain_blank, 1, 24, plasmid_str, Translate("none"));
  SeqSetPropertyRange(ML_STAR.plasmid_B, 1, 12, plasmid_str, plasmid_B_id);
  SeqSetPropertyRange(ML_STAR.plasmid_C, 1, 12, plasmid_str, plasmid_C_id);
  SeqSetPropertyRange(ML_STAR.plasmid_D, 1, 12, plasmid_str, plasmid_D_id);
  SeqSetPropertyRange(ML_STAR.plasmid_E, 1, 12, plasmid_str, plasmid_E_id);
  SeqSetPropertyRange(ML_STAR.plasmid_F, 1, 12, plasmid_str, plasmid_F_id);
  SeqSetPropertyRange(ML_STAR.plasmid_G, 1, 12, plasmid_str, plasmid_G_id);
  SeqSetPropertyRange(ML_STAR.plasmid_B, 1, 12, strain_str, strain_1_id);
  SeqSetPropertyRange(ML_STAR.plasmid_C, 1, 12, strain_str, strain_1_id);
  SeqSetPropertyRange(ML_STAR.plasmid_D, 1, 12, strain_str, strain_1_id);
  SeqSetPropertyRange(ML_STAR.plasmid_E, 1, 12, strain_str, strain_1_id);
  SeqSetPropertyRange(ML_STAR.plasmid_F, 1, 12, strain_str, strain_1_id);
  SeqSetPropertyRange(ML_STAR.plasmid_G, 1, 12, strain_str, strain_1_id);
  prop_arr.SetSize(0);
  prop_arr.AddAsLast(strain_str);
  prop_arr.AddAsLast(plasmid_str);
  LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.strain_blank, prop_arr, ML_STAR.Growth_Plate);
  LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.plasmid_B, prop_arr, ML_STAR.Growth_Plate);
  LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.plasmid_C, prop_arr, ML_STAR.Growth_Plate);
  LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.plasmid_D, prop_arr, ML_STAR.Growth_Plate);
  LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.plasmid_E, prop_arr, ML_STAR.Growth_Plate);
  LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.plasmid_F, prop_arr, ML_STAR.Growth_Plate);
  LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.plasmid_G, prop_arr, ML_STAR.Growth_Plate);
}

private function GetParams(  ) void {
  private variable set_temperature;
  private variable param_dict;
  private variable loc;
  private variable loopCounter2;
  private variable preheat_time;
  private variable read_line;
  private file file1;
  private variable split_line[];
  param_dict = "param_dict";
  HSLExtensions::Dictionary::CreateDictionary(param_dict, 2);
  file1.AddField(1, read_line, hslString);
  file1.SetDelimiter(hslAsciiText);
  if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    while (
       (file1.Eof() == 0)
    )
    {
      loopCounter2 = loopCounter2 + 1;
      if( 0 == file1.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      loc = StrFind(read_line, ",");
      if (loc > 0)
      {
        split_line = HSLExtensions::String::Split(read_line, Translate(","), 1);
        HSLExtensions::Dictionary::AddItem(param_dict, split_line.ElementAt( 1 -1), split_line.ElementAt( 2 -1));
      }
    }
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  set_temperature = 47.0;
  preheat_time = 600;
}

private function SaveWorklistAndMetadata(  ) void {
  private variable inducer_conc;
  private variable iniFilePath;
  private variable row_id;
  private variable strain_str;
  private variable worklist_file_path;
  private variable well_id;
  private variable plasmid;
  private variable strain;
  private variable column_id;
  private variable position;
  private variable additive_conc;
  private variable column_id_str;
  private variable inducer_id;
  private variable iniDir;
  private variable inducer_units;
  private variable loopCounter2;
  private variable iniExists;
  private variable plasmid_str;
  private variable additive_id;
  private variable additive_units;
  private file file1;
  additive_id = Translate("none");
  additive_units = Translate("none");
  additive_conc = 0;
  file1.AddField("position", position, hslInteger);
  file1.AddField("well", well_id, hslString, 255);
  file1.AddField("row", row_id, hslString, 255);
  file1.AddField("column", column_id, hslInteger);
  file1.AddField("inducerId", inducer_id, hslString, 255);
  file1.AddField("inducerConcentration", inducer_conc, hslFloat);
  file1.AddField("inducerUnits", inducer_units, hslString, 255);
  file1.AddField("selectorId", additive_id, hslString, 255);
  file1.AddField("selectorConc", additive_conc, hslString, 255);
  file1.AddField("selectorUnits", additive_units, hslString, 255);
  file1.AddField(strain_str, strain, hslString, 255);
  file1.AddField(plasmid_str, plasmid, hslString, 255);
  file1.SetDelimiter(hslCSVDelimited);
  if( 0 == file1.Open(worklist_file_path, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, worklist_file_path, "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    ML_STAR.Growth_Plate.SetCurrentPosition(1);
    while (
       (ML_STAR.Growth_Plate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.Growth_Plate, 1);
      loopCounter2 = loopCounter2 + 1;
      position = ML_STAR.Growth_Plate.GetCurrentPosition();
      well_id = SeqGetPositionId(ML_STAR.Growth_Plate);
      row_id = StrLeft(well_id, 1);
      column_id_str = StrMid(well_id, 1, 2);
      column_id = StrIVal(column_id_str);
      inducer_conc = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("inducer_conc"));
      strain = SeqGetProperty(ML_STAR.Growth_Plate, position, strain_str);
      plasmid = SeqGetProperty(ML_STAR.Growth_Plate, position, plasmid_str);
      if( 0 == file1.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      SeqIncrement(ML_STAR.Growth_Plate, 1);
      if (
         (ML_STAR.Growth_Plate.GetCurrentPosition() > 0 && ML_STAR.Growth_Plate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.Growth_Plate.SetMax(ML_STAR.Growth_Plate.GetTotal());
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  iniDir = HSLExtensions::File::GetDirectoryName(worklist_file_path);
  iniFilePath = iniDir + "\\schema.ini";
  iniExists = HSLExtensions::File::Exists(iniFilePath);
  if (iniExists == 1)
  {
    HSLExtensions::File::Delete(iniFilePath);
  }
}

private function StartUp(  ) void {
  private sequence tip_seq_arr[];
  private variable loopCounter1;
  private variable array_length;
  private variable tip_counter_array[];
  TIP_HANDLING_WITH_96_HEAD::GetTipCounters(tip_counter_array, 1);
  tip_seq_arr.SetSize(0);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_300_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_50_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Offset_pickup);
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        TipCount::Read2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        TipCount::Read2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        TipCount::Read2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 4)
      {
        TipCount::Read2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
}

private function pipette_inducer( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable disp_to_empty ) void {
  TrcTrace(Translate("pipetting inducer volume: "), p_vol);
  if (disp_to_empty == 0)
  {
    GSF_IMS_SHARED_SUBMETHODS::pipette_inducer(asp_seq, disp_seq, p_vol, ML_STAR, ML_STAR.Tips_300_Channels);
  }
  else
  {
    PTL::ResetTipHandlingState();
    PTL::SetTipHandlingState("UserResponseTime", 0);
    PTL::SetTipHandlingState("ErrorHandling", 3);
    PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
    PTL::SetTipHandlingState("TipCountingIdentifier", "");
    PTL::SetTipHandlingState("InitializeCustomStepID", 0);
    PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
    PTL::SetTipHandlingState("TipPickupChannelVariable", "");
    PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
    PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
    if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_1000_Channels) )
    {
          PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    GSF_IMS_SHARED_SUBMETHODS::pipette_media(asp_seq, disp_seq, p_vol, 2, asp_seq, asp_seq, ML_STAR, ML_STAR.Tips_1000_Channels);
    PTL::ResetTipHandlingState();
    PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
    PTL::SetTipHandlingState("ErrorHandling", 3);
    PTL::SetTipHandlingState("InitializeCustomStepID", 0);
    PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
    PTL::SetTipHandlingState("TipEjectChannelVariable", "");
    if( 0 == PTL::TipEject(ML_STAR) )
    {
          PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
  }
}
