global device ML_STAR ("3_Active_Hamilton_Methods\\Align_NIST\\DAMP_Cytometry for 6 variants.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "GSF-IMS Project\\GSF-IMS.shared_submethods.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
 namespace _Method { #include "ASWStandardDialogs\\ASWStandard\\ASWGlobal\\ASWGlobal.hsl" }
#include "3_Active_Hamilton_Methods\\Align_NIST\\DAMP_Cytometry for 6 variants.res"
dialog dialogHandle_1;
dialog dialogHandle_2;
dialog dialogHandle_3;
variable mix_volume;
variable dil_series_transf_vol;
variable inducer_max_volume;
variable dil_series_multiplier;
variable media_volume;
variable dil_series_factor;
variable inducer_ref_volume;
variable culture_volume;
variable is_pipetting;
variable grad_start_media_volume;
variable cell_volume;
variable grad_plate_number;
variable dilution_factor;
variable is_debugging;
dialog customDialog_4;
dialog customDialog_5;
variable is_gp_2;
variable is_gp_3;
variable tip_counter_array[];
variable MediaLoop;
variable InducerDilution;
dialog customDialog_6;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    GSF_IMS_SHARED_SUBMETHODS::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("==============================================================\nThis method used for preparing plate 2, with inducer gradient but no selector\n\nIt uses 16 1000 uL tips and 8 300 uL tips\nand 1.2 mL of inducer stock\n=============================================================="));
    GetParams();
    StartUp();
    customDialog_6.InitCustomDialog("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");
    customDialog_6.ShowCustomDialog();
    is_pipetting = ASWGLOBAL::BOOL::TRUE;
    is_debugging = ASWGLOBAL::BOOL::FALSE;
    is_gp_2 = ASWGLOBAL::BOOL::TRUE;
    is_gp_3 = ASWGLOBAL::BOOL::FALSE;
    customDialog_5.InitCustomDialog("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");
    customDialog_5.SetCustomDialogProperty( "gp_2_button.IsChecked", is_gp_2 );
    customDialog_5.SetCustomDialogProperty( "gp_3_button.IsChecked", is_gp_3 );
    customDialog_5.ShowCustomDialog();
    is_gp_2 = customDialog_5.GetCustomDialogProperty( "gp_2_button.IsChecked" );
    is_gp_3 = customDialog_5.GetCustomDialogProperty( "gp_3_button.IsChecked" );
    if (is_gp_2 == ASWGLOBAL::BOOL::TRUE)
    {
      dilution_factor = 50;
      grad_plate_number = 1;
      TrcTrace(Translate("Pipetting to prepare Growth Plate number: "), Translate("2"));
    }
    else
    {
      if (is_gp_3 == ASWGLOBAL::BOOL::TRUE)
      {
        dilution_factor = 10;
        grad_plate_number = 2;
        TrcTrace(Translate("Pipetting to prepare Growth Plate number: "), Translate("3"));
      }
    }
    culture_volume = 500;
    cell_volume = culture_volume / (dilution_factor * 1.0);
    media_volume = culture_volume - cell_volume;
    dil_series_factor = 2.0;
    dil_series_multiplier = dil_series_factor - 1.0;
    dil_series_multiplier = dil_series_factor / (dil_series_multiplier * 1.0);
    dil_series_transf_vol = media_volume * dil_series_multiplier;
    dil_series_transf_vol = dil_series_transf_vol - media_volume;
    if (grad_plate_number == 1)
    {
      inducer_ref_volume = culture_volume;
    }
    else
    {
      inducer_ref_volume = media_volume;
    }
    inducer_max_volume = inducer_ref_volume / (2 * 1.0);
    inducer_max_volume = inducer_max_volume * dil_series_multiplier;
    grad_start_media_volume = media_volume * dil_series_multiplier;
    grad_start_media_volume = grad_start_media_volume - inducer_max_volume;
    TrcTrace(Translate("dil_series_factor: "), dil_series_factor);
    TrcTrace(Translate("dilution_factor: "), dilution_factor);
    TrcTrace(Translate("cell_volume: "), cell_volume);
    TrcTrace(Translate("media_volume: "), media_volume);
    TrcTrace(Translate("dil_series_transf_vol: "), dil_series_transf_vol);
    TrcTrace(Translate("grad_plate_number: "), grad_plate_number);
    MECC::TraceComment(Translate("--------------------------------------------------------------------------------------------------------"));
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.CORE_GripTool, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.CORE_GripTool, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_source_lid, ML_STAR.lid_parking_Media_Source, ML_STAR.CORE_GripTool, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate\n=============================================================="));
    if (is_pipetting == ASWGLOBAL::BOOL::TRUE)
    {
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      {
        MediaLoop = 0;
        while (
           (ML_STAR.inducer_zero_at_start.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.Media_pipette_from, 1, ML_STAR.inducer_zero_at_start, 1);
          MediaLoop = MediaLoop + 1;
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          if (
             (ML_STAR.inducer_zero_at_start.GetCurrentPosition() > 0 && ML_STAR.inducer_zero_at_start.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.Media_pipette_from.SetMax(ML_STAR.Media_pipette_from.GetTotal());
        ML_STAR.inducer_zero_at_start.SetMax(ML_STAR.inducer_zero_at_start.GetTotal());
        ML_STAR.Media_pipette_from.SetCurrentPosition(1);
        ML_STAR.inducer_zero_at_start.SetCurrentPosition(1);
      }
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      ML_STAR.Media_pipette_from.SetCurrentPosition(1);
      MECC::TraceComment(Translate("--------------------------------------------------------------------------------------------------------------------"));
    }
    else
    {
      if (is_debugging == ASWGLOBAL::BOOL::TRUE)
      {
        dialogHandle_2.SetOutput(Translate("media into growth plate"), "\n", Translate("media into Abgene plate"), "\n");
        dialogHandle_2.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.lid_parking_Media_Source, ML_STAR.Media_source_lid, ML_STAR.CORE_GripTool, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.CORE_GripTool, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nPipette inducer (e.g. IPTG) stock into grad start wells\n=============================================================="));
    if (is_pipetting == ASWGLOBAL::BOOL::TRUE)
    {
      pipette_inducer(ML_STAR.Inducer_1_stock, ML_STAR.inducer_grad_start, inducer_max_volume, 0);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_3.SetOutput(Translate("Reagent stock plate to Abgene plate"), "\n");
        dialogHandle_3.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.CORE_GripTool, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nPipette inducer dilution gradient\n=============================================================="));
    if (is_pipetting == ASWGLOBAL::BOOL::TRUE)
    {
      mix_volume = media_volume * 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      {
        InducerDilution = 0;
        while (
           (ML_STAR.Inducer_dil_to.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.Inducer_dil_from, 1, ML_STAR.Inducer_dil_to, 1);
          InducerDilution = InducerDilution + 1;
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          if (
             (ML_STAR.Inducer_dil_to.GetCurrentPosition() > 0 && ML_STAR.Inducer_dil_to.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.Inducer_dil_from.SetMax(ML_STAR.Inducer_dil_from.GetTotal());
        ML_STAR.Inducer_dil_to.SetMax(ML_STAR.Inducer_dil_to.GetTotal());
        ML_STAR.Inducer_dil_from.SetCurrentPosition(1);
        ML_STAR.Inducer_dil_to.SetCurrentPosition(1);
      }
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if(0){
        pipette_dil_series(ML_STAR.Inducer_dil_from, ML_STAR.Inducer_dil_to, dil_series_transf_vol, mix_volume, 8);
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_1.SetOutput(Translate("Growth plate and Abgene plate"), "\n");
        dialogHandle_1.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.CORE_GripTool, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CalculateOutputs();
    if(0){
      SaveWorklistAndMetadata();
    }
    CleanUp();
    customDialog_4.InitCustomDialog("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");
    customDialog_4.ShowCustomDialog();
    GSF_IMS_SHARED_SUBMETHODS::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
  } }
