 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLExtensions\\Array.hsl" }
 namespace _Method { #include "HSLExtensions\\Directory.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
#include "DAMP_Cytometry for 6 variants.res"
variable tip_counter_array[];
sequence tip_seq_arr[];
variable loopCounter1;
variable array_length;
variable tip_status_file;
global device ML_STAR ("DAMP_Cytometry for 6 variants.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    COMMON96HEADSUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    TIP_HANDLING_WITH_96_HEAD::GetTipCounters(tip_counter_array, 1);
    tip_seq_arr.SetSize(0);
    tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Channels);
    tip_seq_arr.AddAsLast(ML_STAR.Tips_300_Channels);
    if(0){
      array_length=tip_counter_array.GetSize();
    }
    array_length = 2;
    {
      for(loopCounter1 = 0; loopCounter1 < array_length;)
      {
        loopCounter1 = loopCounter1 + 1;
        TipCount::Edit2(tip_seq_arr.ElementAt( loopCounter1 -1), tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        TipCount::Write2(tip_seq_arr.ElementAt( loopCounter1 -1), tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
    CleanUp();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
  } }
