 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
 namespace _Method { #include "GSF-IMS Project\\GSF-IMS.shared_submethods.hs_" }
 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
#include "protease_groq_seq_v6.res"
variable worklist_file_path;
variable strain_1_id;
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable culture_volume;
variable dilution_factor;
variable cell_volume;
variable inducer_ref_volume;
variable plate_number;
variable tmp_ref_volume;
variable with_tmp;
variable media_volume;
variable first_tmp_plate;
dialog customDialog_1;
dialog customDialog_2;
variable dil_series_transf_vol;
variable dil_series_multiplier;
variable dil_series_factor;
variable grad_start_tmp_volume;
global device ML_STAR ("protease_groq_seq_v6.lay", "ML_STAR", hslTrue);
variable inducer_2_id;
variable inducer_1_units;
variable inducer_1_id;
variable inducer_2_units;
variable inducer_1_stock_concentration;
variable sal_stock_conc_arr[];
variable van_stock_dilution;
dialog dialogHandle_3;
variable sal_volume;
variable sal_tmp_stock_dilution;
variable van_grad_start_media_volume;
variable grad_start_sal_volume;
variable van_stock_dilution_mid;
variable van_volume_high;
variable tmp_volume;
variable sal_volume_2;
variable van_volume_mid;
variable sal_stock_dilution_2;
variable grad_start_media_volume_0;
variable p_vol;
variable is_debugging;
variable grad_start_sal_volume_2;
variable sal_grad_start_media_volume_1;
variable grad_start_van_volume;
variable sal_grad_start_media_volume_2;
dialog dialogHandle_4;
dialog dialogHandle_5;
dialog dialogHandle_6;
variable tmp_conc;
variable additive_1_units;
variable additive_1_id;
variable additive_1_stock_concentration;
variable plasmid_id_arr[];
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    LMSF_UTILITIES::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_InitLibrary();
    COMMON96HEADSUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("==============================================================\n\n=============================================================="));
    GetParams();
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    StartUp();
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.CORE_GripTool, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.CORE_GripTool, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_source_lid, ML_STAR.lid_parking_Media_Source, ML_STAR.CORE_GripTool, 0, 1, ML_STAR);
    dil_series_multiplier = dil_series_factor - 1.0;
    dil_series_multiplier = dil_series_factor / (dil_series_multiplier * 1.0);
    cell_volume = culture_volume / (dilution_factor * 1.0);
    media_volume = culture_volume - cell_volume;
    dil_series_transf_vol = media_volume * dil_series_multiplier;
    dil_series_transf_vol = dil_series_transf_vol - media_volume;
    first_tmp_plate = 3;
    if (plate_number < first_tmp_plate)
    {
      inducer_ref_volume = culture_volume;
      tmp_ref_volume = culture_volume;
      with_tmp = 0;
    }
    else
    {
      with_tmp = 1;
      if (plate_number == first_tmp_plate)
      {
        inducer_ref_volume = media_volume;
        tmp_ref_volume = culture_volume;
      }
      else
      {
        if (plate_number > first_tmp_plate)
        {
          inducer_ref_volume = media_volume;
          tmp_ref_volume = media_volume;
        }
      }
    }
    if (with_tmp == 1)
    {
      tmp_volume = tmp_ref_volume / (sal_tmp_stock_dilution * 1.0);
    }
    else
    {
      tmp_volume = 0;
    }
    grad_start_tmp_volume = tmp_volume * dil_series_multiplier;
    sal_volume = inducer_ref_volume / (sal_tmp_stock_dilution * 1.0);
    grad_start_sal_volume = sal_volume * dil_series_multiplier;
    sal_volume_2 = inducer_ref_volume / (sal_stock_dilution_2 * 1.0);
    grad_start_sal_volume_2 = sal_volume_2 * dil_series_multiplier;
    van_volume_high = inducer_ref_volume / (van_stock_dilution * 1.0);
    grad_start_van_volume = van_volume_high * dil_series_multiplier;
    van_volume_mid = inducer_ref_volume / (van_stock_dilution_mid * 1.0);
    grad_start_media_volume_0 = media_volume * dil_series_multiplier;
    van_grad_start_media_volume = grad_start_media_volume_0 - grad_start_van_volume;
    van_grad_start_media_volume = van_grad_start_media_volume - grad_start_sal_volume;
    van_grad_start_media_volume = van_grad_start_media_volume - grad_start_tmp_volume;
    sal_grad_start_media_volume_1 = grad_start_media_volume_0 - grad_start_sal_volume;
    sal_grad_start_media_volume_1 = sal_grad_start_media_volume_1 - grad_start_tmp_volume;
    sal_grad_start_media_volume_2 = grad_start_media_volume_0 - grad_start_sal_volume_2;
    sal_grad_start_media_volume_2 = sal_grad_start_media_volume_2 - grad_start_tmp_volume;
    TrcTrace(Translate("dilution_factor: "), dilution_factor);
    TrcTrace(Translate("cell_volume: "), cell_volume);
    TrcTrace(Translate("media_volume: "), media_volume);
    TrcTrace(Translate("with_tmp: "), with_tmp);
    TrcTrace(Translate("tmp_volume: "), tmp_volume);
    TrcTrace(Translate("plate_number: "), plate_number);
    MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate\n=============================================================="));
    if (is_pipetting == ASWGLOBAL::BOOL::TRUE)
    {
      GSF_IMS_SHARED_SUBMETHODS::tip_pickup(ML_STAR.Tips_1000_Channels, 4, ML_STAR);
      p_vol = media_volume;
      p_vol = p_vol - tmp_volume;
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from_4, ML_STAR.regular_wells_with_tmp_no_sal, p_vol, 1, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
      p_vol = media_volume;
      p_vol = p_vol - sal_volume;
      p_vol = p_vol - tmp_volume;
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from_4, ML_STAR.regular_wells_with_tmp, p_vol, 1, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
      p_vol = van_grad_start_media_volume;
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from_4, ML_STAR.van_grad_start_wells_with_tmp, p_vol, 0, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
      p_vol = sal_grad_start_media_volume_1;
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from_4, ML_STAR.sal_grad_start_wells_1, p_vol, 0, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
      p_vol = sal_grad_start_media_volume_2;
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from_4, ML_STAR.sal_grad_start_wells_2, p_vol, 0, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
      p_vol = media_volume;
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from_4, ML_STAR.media_no_tmp, p_vol, 0, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
      p_vol = media_volume;
      p_vol = p_vol - van_volume_mid;
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from_4, ML_STAR.mid_van_no_tmp, p_vol, 0, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
      p_vol = media_volume;
      p_vol = p_vol - van_volume_high;
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from_4, ML_STAR.high_van_no_tmp, p_vol, 0, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::tip_eject(4, ML_STAR);
      SeqResetSequenceIndexes(ML_STAR.regular_wells_with_tmp);
      SeqResetSequenceIndexes(ML_STAR.van_grad_start_wells_with_tmp);
      SeqResetSequenceIndexes(ML_STAR.sal_grad_start_wells_1);
      SeqResetSequenceIndexes(ML_STAR.sal_grad_start_wells_2);
      SeqResetSequenceIndexes(ML_STAR.mid_van_no_tmp);
      SeqResetSequenceIndexes(ML_STAR.high_van_no_tmp);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_3.SetOutput(Translate("media into growth plate"), "\n", Translate("media into Abgene plate"), "\n");
        dialogHandle_3.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.lid_parking_Media_Source, ML_STAR.Media_source_lid, ML_STAR.CORE_GripTool, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.CORE_GripTool, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nAdd Sal, to Van gradient wells and to starting wells for Sal gradients\n=============================================================="));
    if (is_pipetting == ASWGLOBAL::BOOL::TRUE)
    {
      GSF_IMS_SHARED_SUBMETHODS::tip_pickup(ML_STAR.Tips_300_Channels, 4, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_reuse_tips(ML_STAR.Sal_stock_1_4, ML_STAR.regular_wells_with_sal_1, sal_volume, 1, 0, ML_STAR.Tips_300_Channels, 4, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_reuse_tips(ML_STAR.Sal_stock_1_4, ML_STAR.van_grad_start_wells_with_sal_1, grad_start_sal_volume, 0, 0, ML_STAR.Tips_300_Channels, 4, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_reuse_tips(ML_STAR.Sal_stock_1_4, ML_STAR.sal_grad_start_wells_1, grad_start_sal_volume, 0, 0, ML_STAR.Tips_300_Channels, 4, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::tip_eject(4, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::tip_pickup(ML_STAR.Tips_300_Channels, 4, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_reuse_tips(ML_STAR.Sal_stock_2_4, ML_STAR.regular_wells_with_sal_2, sal_volume, 1, 0, ML_STAR.Tips_300_Channels, 4, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_reuse_tips(ML_STAR.Sal_stock_2_4, ML_STAR.van_grad_start_wells_with_sal_2, grad_start_sal_volume, 0, 0, ML_STAR.Tips_300_Channels, 4, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_reuse_tips(ML_STAR.Sal_stock_2_4, ML_STAR.sal_grad_start_wells_2, grad_start_sal_volume_2, 0, 0, ML_STAR.Tips_300_Channels, 4, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::tip_eject(4, ML_STAR);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_5.SetOutput(Translate("media into growth plate"), "\n", Translate("media into Abgene plate"), "\n");
        dialogHandle_5.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    MECC::TraceComment(Translate("==============================================================\nAdd TMP\n=============================================================="));
    if (with_tmp == 1)
    {
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(ML_STAR.TMP_stock, ML_STAR.regular_wells_with_tmp, tmp_volume, 0, 0, ML_STAR.Tips_300_Channels, 8, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(ML_STAR.TMP_stock_4, ML_STAR.regular_wells_with_tmp_no_sal, tmp_volume, 0, 0, ML_STAR.Tips_300_Channels, 4, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(ML_STAR.TMP_stock, ML_STAR.grad_start_wells_with_tmp, grad_start_tmp_volume, 0, 0, ML_STAR.Tips_300_Channels, 8, ML_STAR);
      SeqResetSequenceIndexes(ML_STAR.regular_wells_with_tmp);
    }
    MECC::TraceComment(Translate("==============================================================\nAdd Van to grad_start wells\n=============================================================="));
    if (is_pipetting == ASWGLOBAL::BOOL::TRUE)
    {
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(ML_STAR.Van_stock_1, ML_STAR.van_grad_start_wells_with_tmp, grad_start_van_volume, 0, 0, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_6.SetOutput(Translate("media into growth plate"), "\n", Translate("media into Abgene plate"), "\n");
        dialogHandle_6.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    MECC::TraceComment(Translate("==============================================================\nAdd Van to zero-tmp wells\n=============================================================="));
    if (is_pipetting == ASWGLOBAL::BOOL::TRUE)
    {
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(ML_STAR.Van_stock_1_4, ML_STAR.mid_van_no_tmp, van_volume_mid, 0, 0, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(ML_STAR.Van_stock_1_4, ML_STAR.high_van_no_tmp, van_volume_high, 0, 0, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_4.SetOutput(Translate("media into growth plate"), "\n", Translate("media into Abgene plate"), "\n");
        dialogHandle_4.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    MECC::TraceComment(Translate("==============================================================\nReplace lid onto Reagent stock plate\n=============================================================="));
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.CORE_GripTool, 1, 1, ML_STAR);
    GSF_IMS_SHARED_SUBMETHODS::pipette_dil_series(ML_STAR.van_gradient_1_pipette_from, ML_STAR.van_gradient_1_pipette_to, dil_series_transf_vol, 2, dil_series_transf_vol, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
    GSF_IMS_SHARED_SUBMETHODS::pipette_dil_series(ML_STAR.van_gradient_2_pipette_from, ML_STAR.van_gradient_2_pipette_to, dil_series_transf_vol, 2, dil_series_transf_vol, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
    GSF_IMS_SHARED_SUBMETHODS::pipette_dil_series(ML_STAR.sal_gradient_pipette_from, ML_STAR.sal_gradient_pipette_to, dil_series_transf_vol, 2, dil_series_transf_vol, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
    MECC::TraceComment(Translate("***************************************************\nReplace lid onto Growth plate.\n***************************************************"));
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.CORE_GripTool, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CalculateOutputs();
    SaveWorklistAndMetadata();
    CleanUp();
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    LMSF_UTILITIES::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_ExitLibrary();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
  } }
