 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
 namespace _Method { #include "GSF-IMS Project\\GSF-IMS.shared_submethods.hs_" }
 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
#include "T7RNAP_GROQ_Seq.DAMP.res"
variable worklist_file_path;
variable strain_1_id;
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable culture_volume;
variable dilution_factor;
variable cell_volume;
variable plate_number;
variable tmp_ref_volume;
variable with_tmp;
variable media_volume;
variable add_tmp_volume;
variable media_vol_w_tmp;
variable plasmid_1_id_arr[];
variable num_channels;
variable first_tmp_plate;
dialog customDialog_1;
dialog customDialog_2;
global device ML_STAR ("T7RNAP_GROQ_Seq.DAMP.lay", "ML_STAR", hslTrue);
variable tmp_conc;
variable tmp_id;
variable tmp_units;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    LMSF_UTILITIES::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_InitLibrary();
    COMMON96HEADSUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("==============================================================\n\n=============================================================="));
    GetParams();
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    StartUp();
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.CORE_GripTool, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.CORE_GripTool, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_source_lid, ML_STAR.lid_parking_Media_Source, ML_STAR.CORE_GripTool, 0, 1, ML_STAR);
    cell_volume = culture_volume / (dilution_factor * 1.0);
    media_volume = culture_volume - cell_volume;
    first_tmp_plate = 3;
    if (plate_number < first_tmp_plate)
    {
      tmp_ref_volume = culture_volume;
      with_tmp = 0;
    }
    else
    {
      with_tmp = 1;
      if (plate_number == first_tmp_plate)
      {
        tmp_ref_volume = culture_volume;
      }
      else
      {
        if (plate_number > first_tmp_plate)
        {
          tmp_ref_volume = media_volume;
        }
      }
    }
    if (with_tmp == 1)
    {
      add_tmp_volume = tmp_ref_volume / (10 * 1.0);
    }
    else
    {
      add_tmp_volume = 0;
    }
    media_vol_w_tmp = media_volume - add_tmp_volume;
    TrcTrace(Translate("dilution_factor: "), dilution_factor);
    TrcTrace(Translate("cell_volume: "), cell_volume);
    TrcTrace(Translate("media_volume: "), media_volume);
    TrcTrace(Translate("with_tmp: "), with_tmp);
    TrcTrace(Translate("add_tmp_volume: "), add_tmp_volume);
    TrcTrace(Translate("plate_number: "), plate_number);
    MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate\n=============================================================="));
    if (is_pipetting == ASWGLOBAL::BOOL::TRUE)
    {
      num_channels = 4;
      GSF_IMS_SHARED_SUBMETHODS::tip_pickup(ML_STAR.Tips_1000_Channels, num_channels, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from_4, ML_STAR.media_w_tmp, media_vol_w_tmp, 1, ML_STAR.Tips_1000_Channels, num_channels, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from_4, ML_STAR.media_w_nothing, media_volume, 1, ML_STAR.Tips_1000_Channels, num_channels, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::tip_eject(num_channels, ML_STAR);
    }
    else
    {
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.lid_parking_Media_Source, ML_STAR.Media_source_lid, ML_STAR.CORE_GripTool, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.CORE_GripTool, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nDilute selector (e.g. TMP) stock into appropriate wells\n=============================================================="));
    if (is_pipetting == ASWGLOBAL::BOOL::TRUE)
    {
      if (with_tmp == 1)
      {
        GSF_IMS_SHARED_SUBMETHODS::add_reagent_reuse_tips(ML_STAR.tmp_stock_1, ML_STAR.add_tmp, add_tmp_volume, 1, 1, ML_STAR.Tips_300_Channels, 8, ML_STAR);
      }
    }
    else
    {
    }
    MECC::TraceComment(Translate("***************************************************\nReplace lids onto Reagent stock plate and Growth plate.\n***************************************************"));
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.CORE_GripTool, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.CORE_GripTool, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CalculateOutputs();
    SaveWorklistAndMetadata();
    CleanUp();
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    LMSF_UTILITIES::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_ExitLibrary();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
  } }
