private function CalculateOutputs(  ) void ;
private function CleanUp(  ) void ;
private function GetParams(  ) void ;
private function SaveWorklistAndMetadata(  ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function CleanUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        TipCount::Write2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        TipCount::Write2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        TipCount::Write2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
}

private function StartUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  TIP_HANDLING_WITH_96_HEAD::GetTipCounters(tip_counter_array, 1);
  tip_seq_arr.SetSize(0);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_300_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_50_Channels);
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        TipCount::Edit2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        TipCount::Read2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        TipCount::Edit2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        TipCount::Read2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
}

private function CalculateOutputs(  ) void {
  private variable prop_arr[];
  private variable int_seq_len;
  private variable flt_conc;
  private variable plas_num;
  private variable start_pos;
  private variable end_pos;
  MECC::TraceComment(Translate("**** Start CalculateOutputs sub-method ****"));
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "inducer_conc", 0);
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "inducer_id", "none");
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "inducer_units", "none");
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "additive_conc", 0);
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "additive_id", "none");
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "additive_units", "none");
  if (with_tmp == 1)
  {
    prop_arr.SetSize(0);
    prop_arr.AddAsLast(Translate("additive_id"));
    prop_arr.AddAsLast(Translate("additive_conc"));
    prop_arr.AddAsLast(Translate("additive_units"));
    int_seq_len = SeqGetTotal(ML_STAR.add_tmp);
    SeqSetPropertyRange(ML_STAR.add_tmp, 1, int_seq_len, Translate("additive_id"), tmp_id);
    flt_conc = tmp_conc / (10 * 1.0);
    SeqSetPropertyRange(ML_STAR.add_tmp, 1, int_seq_len, Translate("additive_conc"), flt_conc);
    SeqSetPropertyRange(ML_STAR.add_tmp, 1, int_seq_len, Translate("additive_units"), tmp_units);
    LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.add_tmp, prop_arr, ML_STAR.Growth_Plate);
  }
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, Translate("strain"), strain_1_id);
  prop_arr.SetSize(0);
  prop_arr.AddAsLast(Translate("plasmid"));
  {
    for(plas_num = 0; plas_num < 12;)
    {
      plas_num = plas_num + 1;
      start_pos = plas_num - 1;
      start_pos = start_pos * 8;
      start_pos = start_pos + 1;
      end_pos = start_pos + 7;
      SeqSetPropertyRange(ML_STAR.Growth_Plate, start_pos, end_pos, Translate("plasmid"), plasmid_1_id_arr.ElementAt( plas_num -1));
    }
  }
  MECC::TraceComment(Translate("**** Completed CalculateOutputs sub-method ****"));
}

private function SaveWorklistAndMetadata(  ) void {
  private variable row_id;
  private variable well_id;
  private variable plasmid;
  private variable strain;
  private variable position;
  private variable column_id;
  private variable column_id_str;
  private file file1;
  private variable iniFilePath;
  private variable iniDir;
  private variable iniExists;
  private variable loopCounter2;
  private variable inducer_conc;
  private variable additive_conc;
  private variable inducer_id;
  private variable inducer_units;
  private variable additive_id;
  private variable additive_units;
  MECC::TraceComment(Translate("**** Start SaveWorklist sub-method ****"));
  file1.AddField("position", position, hslInteger);
  file1.AddField("well", well_id, hslString, 255);
  file1.AddField("row", row_id, hslString, 255);
  file1.AddField("column", column_id, hslInteger);
  file1.AddField("inducerId", inducer_id, hslString, 255);
  file1.AddField("inducerConcentration", inducer_conc, hslFloat);
  file1.AddField("inducerUnits", inducer_units, hslString, 255);
  file1.AddField("selectorId", additive_id, hslString, 255);
  file1.AddField("selectorConc", additive_conc, hslString, 255);
  file1.AddField("selectorUnits", additive_units, hslString, 255);
  file1.AddField("strain", strain, hslString, 255);
  file1.AddField("plasmid", plasmid, hslString, 255);
  file1.SetDelimiter(hslCSVDelimited);
  if( 0 == file1.Open(worklist_file_path, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, worklist_file_path, "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    ML_STAR.Growth_Plate.SetCurrentPosition(1);
    while (
       (ML_STAR.Growth_Plate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.Growth_Plate, 1);
      loopCounter2 = loopCounter2 + 1;
      position = ML_STAR.Growth_Plate.GetCurrentPosition();
      well_id = SeqGetPositionId(ML_STAR.Growth_Plate);
      row_id = StrLeft(well_id, 1);
      column_id_str = StrMid(well_id, 1, 2);
      column_id = StrIVal(column_id_str);
      inducer_conc = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("inducer_conc"));
      inducer_id = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("inducer_id"));
      inducer_units = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("inducer_units"));
      additive_conc = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("additive_conc"));
      additive_id = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("additive_id"));
      additive_units = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("additive_units"));
      strain = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("strain"));
      plasmid = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("plasmid"));
      if( 0 == file1.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      SeqIncrement(ML_STAR.Growth_Plate, 1);
      if (
         (ML_STAR.Growth_Plate.GetCurrentPosition() > 0 && ML_STAR.Growth_Plate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.Growth_Plate.SetMax(ML_STAR.Growth_Plate.GetTotal());
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  iniDir = HSLExtensions::File::GetDirectoryName(worklist_file_path);
  iniFilePath = iniDir + "\\schema.ini";
  iniExists = HSLExtensions::File::Exists(iniFilePath);
  if (iniExists == 1)
  {
    HSLExtensions::File::Delete(iniFilePath);
  }
  MECC::TraceComment(Translate("**** Completed SaveWorklist sub-method ****"));
}

private function GetParams(  ) void {
  private variable plate_num_str;
  private dialog customDialog_1;
  private dialog customDialog_2;
  private variable is_gp_2;
  private variable is_gp_3;
  private variable is_gp_4;
  private variable is_gp_5;
  private variable plasmid_id;
  private variable plas_num_str;
  private variable plas_num;
  MECC::TraceComment(Translate("**** Start GetParams sub-method ****"));
  customDialog_1.InitCustomDialog("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");
  customDialog_1.ShowCustomDialog();
  worklist_file_path = customDialog_1.GetCustomDialogProperty( "path1.Path" );
  strain_1_id = Translate("NEB10B");
  plasmid_1_id_arr.SetSize(0);
  {
    for(plas_num = 0; plas_num < 12;)
    {
      plas_num = plas_num + 1;
      plas_num_str = StrIStr(plas_num);
      plasmid_id = StrConcat2(Translate("plasmid_"), plas_num_str);
      plasmid_1_id_arr.AddAsLast(plasmid_id);
    }
  }
  tmp_id = "TMP";
  tmp_conc = 30.0;
  tmp_units = "ug/mL";
  is_pipetting = ASWGLOBAL::BOOL::TRUE;
  culture_volume = 500;
  is_gp_2 = ASWGLOBAL::BOOL::TRUE;
  is_gp_3 = ASWGLOBAL::BOOL::FALSE;
  is_gp_4 = ASWGLOBAL::BOOL::FALSE;
  is_gp_5 = ASWGLOBAL::BOOL::FALSE;
  customDialog_2.InitCustomDialog("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");
  customDialog_2.SetCustomDialogProperty( "gp_2_button.IsChecked", is_gp_2 );
  customDialog_2.SetCustomDialogProperty( "gp_3_button.IsChecked", is_gp_3 );
  customDialog_2.SetCustomDialogProperty( "gp_4_button.IsChecked", is_gp_4 );
  customDialog_2.SetCustomDialogProperty( "gp_5_button.IsChecked", is_gp_5 );
  customDialog_2.ShowCustomDialog();
  is_gp_2 = customDialog_2.GetCustomDialogProperty( "gp_2_button.IsChecked" );
  is_gp_3 = customDialog_2.GetCustomDialogProperty( "gp_3_button.IsChecked" );
  is_gp_4 = customDialog_2.GetCustomDialogProperty( "gp_4_button.IsChecked" );
  is_gp_5 = customDialog_2.GetCustomDialogProperty( "gp_5_button.IsChecked" );
  if (is_gp_2 == ASWGLOBAL::BOOL::TRUE)
  {
    dilution_factor = 50;
    plate_number = 2;
    TrcTrace(Translate("Pipetting to prepare Growth Plate number: "), Translate("2"));
  }
  else
  {
    dilution_factor = 10;
    if (is_gp_3 == ASWGLOBAL::BOOL::TRUE)
    {
      plate_number = 3;
    }
    if (is_gp_4 == ASWGLOBAL::BOOL::TRUE)
    {
      plate_number = 4;
    }
    if (is_gp_5 == ASWGLOBAL::BOOL::TRUE)
    {
      plate_number = 5;
    }
    plate_num_str = StrIStr(plate_number);
    TrcTrace(Translate("Pipetting to prepare Growth Plate number: "), plate_num_str);
  }
}
