 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
 namespace _Method { #include "GSF-IMS Project\\GSF-IMS.shared_submethods.hs_" }
 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLTimLib.hsl" }
 namespace _Method { #include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
#include "3_Active_Hamilton_Methods\\Align_NIST\\TF_GROQ_Seq\\TF_GROQ_Seq.DAMP.res"
variable inducer_stock_concentration;
variable inducer_id;
variable inducer_units;
variable worklist_file_path;
variable strain_1_id;
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable culture_volume;
variable additive_id;
variable additive_units;
variable additive_stock_concentration;
sequence bacteria_stocks_arr[];
sequence bacteria_dispense_arr[];
variable is_clonal_test;
variable plasmid_1_id_arr[];
variable plasmid_2_id_arr[];
variable plasmid_3_id_arr[];
variable media_volume;
variable cell_volume;
variable cell_counter;
global device ML_STAR ("3_Active_Hamilton_Methods\\Align_NIST\\TF_GROQ_Seq\\TF_GROQ_Seq.DAMP.lay", "ML_STAR", hslTrue);
dialog customDialog_1;
dialog customDialog_2;
dialog customDialog_3;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_InitLibrary();
    COMMON96HEADSUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("==========================================================================================\nThis method used for preparing plate 1, with just media and bacteria in all the wells, for growth to stationary phase.\n\nIt uses 16 1000 uL tips\n=========================================================================================="));
    GetParams();
    if (is_clonal_test == ASWGLOBAL::BOOL::TRUE)
    {
      customDialog_3.InitCustomDialog("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");
      customDialog_3.ShowCustomDialog();
    }
    else
    {
      customDialog_2.InitCustomDialog("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");
      customDialog_2.ShowCustomDialog();
    }
    StartUp();
    bacteria_stocks_arr.SetSize(0);
    if (is_clonal_test == ASWGLOBAL::BOOL::TRUE)
    {
      bacteria_stocks_arr.AddAsLast(ML_STAR.bacteria_stocks_1);
      bacteria_stocks_arr.AddAsLast(ML_STAR.bacteria_stocks_2);
      bacteria_stocks_arr.AddAsLast(ML_STAR.bacteria_stocks_3);
    }
    else
    {
      bacteria_stocks_arr.AddAsLast(ML_STAR.library_stock_1);
      bacteria_stocks_arr.AddAsLast(ML_STAR.library_stock_2);
      bacteria_stocks_arr.AddAsLast(ML_STAR.library_stock_3);
    }
    bacteria_dispense_arr.SetSize(0);
    bacteria_dispense_arr.AddAsLast(ML_STAR.bacteria_dispense_1);
    bacteria_dispense_arr.AddAsLast(ML_STAR.bacteria_dispense_2);
    bacteria_dispense_arr.AddAsLast(ML_STAR.bacteria_dispense_3);
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.CORE_GripTool, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.CORE_GripTool, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_source_lid, ML_STAR.lid_parking_Media_Source, ML_STAR.CORE_GripTool, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate.\n=============================================================="));
    if (is_pipetting == ASWGLOBAL::BOOL::TRUE)
    {
      media_volume = culture_volume * 0.9;
      GSF_IMS_SHARED_SUBMETHODS::tip_pickup(ML_STAR.Tips_1000_Channels, 8, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from, ML_STAR.Media_dispense_all, media_volume, 1, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::tip_eject(8, ML_STAR);
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.lid_parking_Media_Source, ML_STAR.Media_source_lid, ML_STAR.CORE_GripTool, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nPipette cells into growth plate.\n=============================================================="));
    if (is_pipetting == ASWGLOBAL::BOOL::TRUE)
    {
      cell_volume = culture_volume * 0.1;
      {
        for(cell_counter = 0; cell_counter < 3;)
        {
          cell_counter = cell_counter + 1;
          GSF_IMS_SHARED_SUBMETHODS::pipette_cells_from_tubes(bacteria_stocks_arr.ElementAt( cell_counter -1), bacteria_dispense_arr.ElementAt( cell_counter -1), cell_volume, 2, 800, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
        }
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.CORE_GripTool, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.CORE_GripTool, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Lid_parking_Old_Growth_Plate, ML_STAR.CORE_GripTool, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CalculateOutputs();
    SaveWorklistAndMetadata();
    CleanUp();
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_ExitLibrary();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
  } }
