 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
 namespace _Method { #include "GSF-IMS Project\\GSF-IMS.shared_submethods.hs_" }
 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
#include "fitness_check.res"
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
variable worklist_file_path;
variable strain_1_id;
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable culture_volume;
variable dilution_factor;
variable cell_volume;
variable plate_number;
variable media_volume;
variable num_channels;
dialog customDialog_1;
dialog customDialog_2;
dialog customDialog_3;
dialog customDialog_4;
dialog customDialog_5;
variable is_gp_2;
variable is_gp_1;
global device ML_STAR ("fitness_check.lay", "ML_STAR", hslTrue);
sequence gp_cells_arr[];
variable num_variants;
variable num_cell_pipette_steps;
dialog customDialog_6;
dialog dialogHandle_7;
variable load_step_num_str;
variable cell_pipette_counter;
variable load_cells_str;
variable is_debugging;
variable media_1_id;
variable plasmid_id_arr[];
variable index_offset;
variable plasmid_str;
variable plas_index_str;
variable plas_index;
variable plas_loop_counter;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    LMSF_UTILITIES::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_InitLibrary();
    COMMON96HEADSUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("==============================================================\n\n=============================================================="));
    GetParams();
    if (is_gp_1 == ASWGLOBAL::BOOL::TRUE)
    {
      customDialog_4.InitCustomDialog("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");
      customDialog_4.ShowCustomDialog();
    }
    else
    {
      customDialog_5.InitCustomDialog("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");
      customDialog_5.ShowCustomDialog();
    }
    StartUp();
    gp_cells_arr.SetSize(0);
    gp_cells_arr.AddAsLast(ML_STAR.gp_cells_1);
    gp_cells_arr.AddAsLast(ML_STAR.gp_cells_2);
    gp_cells_arr.AddAsLast(ML_STAR.gp_cells_3);
    gp_cells_arr.AddAsLast(ML_STAR.gp_cells_4);
    cell_volume = culture_volume / (dilution_factor * 1.0);
    media_volume = culture_volume - cell_volume;
    TrcTrace(Translate("dilution_factor: "), dilution_factor);
    TrcTrace(Translate("cell_volume: "), cell_volume);
    TrcTrace(Translate("media_volume: "), media_volume);
    TrcTrace(Translate("plate_number: "), plate_number);
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.CORE_GripTool, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.CORE_GripTool, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_source_lid, ML_STAR.lid_parking_Media_Source, ML_STAR.CORE_GripTool, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate\n=============================================================="));
    if (is_pipetting == ASWGLOBAL::BOOL::TRUE)
    {
      num_channels = 8;
      GSF_IMS_SHARED_SUBMETHODS::tip_pickup(ML_STAR.Tips_1000_Channels, num_channels, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from, ML_STAR.Growth_Plate, media_volume, 1, ML_STAR.Tips_1000_Channels, num_channels, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::tip_eject(num_channels, ML_STAR);
    }
    else
    {
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.lid_parking_Media_Source, ML_STAR.Media_source_lid, ML_STAR.CORE_GripTool, 1, 1, ML_STAR);
    num_cell_pipette_steps = num_variants / 8;
    if (plate_number == 1)
    {
      MECC::TraceComment(Translate("==============================================================\nPipette cells into growth plate.\n=============================================================="));
      if (is_pipetting == ASWGLOBAL::BOOL::TRUE)
      {
        load_step_num_str = Translate("");
        {
          for(cell_pipette_counter = 0; cell_pipette_counter < num_cell_pipette_steps;)
          {
            cell_pipette_counter = cell_pipette_counter + 1;
            index_offset = cell_pipette_counter - 1;
            index_offset = index_offset * 8;
            if (cell_pipette_counter == 1)
            {
              load_step_num_str = Translate("first");
            }
            if (cell_pipette_counter == 2)
            {
              load_step_num_str = Translate("second");
            }
            if (cell_pipette_counter == 3)
            {
              load_step_num_str = Translate("third");
            }
            if (cell_pipette_counter == 4)
            {
              load_step_num_str = Translate("fourth");
            }
            load_cells_str = Translate("Load the ");
            load_cells_str = StrConcat4(Translate("Load the "), load_step_num_str, Translate(" set of 8 cultures in positions 1-8:"), Translate(""));
            plasmid_str = Translate("");
            {
              for(plas_loop_counter = 0; plas_loop_counter < 8;)
              {
                plas_loop_counter = plas_loop_counter + 1;
                plas_index = plas_loop_counter + index_offset;
                plas_index_str = StrIStr(plas_loop_counter);
                plas_index_str = StrConcat2(plas_index_str, Translate(": "));
                plasmid_str = StrConcat4(plasmid_str, plas_index_str, plasmid_id_arr.ElementAt( plas_index -1), Translate("\n"));
              }
            }
            TrcTrace(Translate("plasmid_str"), plasmid_str);
            customDialog_6.InitCustomDialog("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");
            customDialog_6.SetCustomDialogProperty( "textBlock.Text", load_cells_str );
            customDialog_6.SetCustomDialogProperty( "textBlock1.Text", plasmid_str );
            customDialog_6.ShowCustomDialog();
            GSF_IMS_SHARED_SUBMETHODS::pipette_cells_from_tubes(ML_STAR.bacteria_stocks_8, gp_cells_arr.ElementAt( cell_pipette_counter -1), cell_volume, 2, 800, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
          }
        }
      }
      else
      {
      }
    }
    MECC::TraceComment(Translate("***************************************************\nReplace lid onto Growth plate.\n***************************************************"));
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.CORE_GripTool, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CalculateOutputs();
    SaveWorklistAndMetadata();
    CleanUp();
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    LMSF_UTILITIES::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_ExitLibrary();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
  } }
