private function CalculateOutputs(  ) void ;
private function CleanUp(  ) void ;
private function GetParams(  ) void ;
private function SaveWorklistAndMetadata(  ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function CleanUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        TipCount::Write2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        TipCount::Write2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        TipCount::Write2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
}

private function StartUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  TIP_HANDLING_WITH_96_HEAD::GetTipCounters(tip_counter_array, 1);
  tip_seq_arr.SetSize(0);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_300_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_50_Channels);
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        TipCount::Edit2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        TipCount::Read2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        TipCount::Edit2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        TipCount::Read2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
}

private function CalculateOutputs(  ) void {
  private variable prop_arr[];
  private variable int_seq_len;
  private variable flt_conc;
  private variable plas_num;
  private variable start_pos;
  private variable end_pos;
  private variable plasmid_repeats;
  private variable plasmid_number;
  private variable well_id;
  private variable labware_id;
  private variable gp_cell_seq_counter;
  private variable plasmid_id;
  private variable repeat_num;
  private variable id_arr_start_index;
  private sequence gp_cell_seq;
  MECC::TraceComment(Translate("**** start CalculateOutputs sub-method ****"));
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, Translate("strain"), strain_1_id);
  plasmid_repeats = 3;
  {
    for(cell_pipette_counter = 0; cell_pipette_counter < num_cell_pipette_steps;)
    {
      cell_pipette_counter = cell_pipette_counter + 1;
      id_arr_start_index = cell_pipette_counter * 8;
      id_arr_start_index = id_arr_start_index - 8;
      SeqCopySequence(gp_cell_seq, gp_cells_arr.ElementAt( cell_pipette_counter -1));
      gp_cell_seq.SetCurrentPosition(1);
      {
        for(repeat_num = 0; repeat_num < plasmid_repeats;)
        {
          repeat_num = repeat_num + 1;
          {
            for(gp_cell_seq_counter = 0; gp_cell_seq_counter < 8;)
            {
              gp_cell_seq_counter = gp_cell_seq_counter + 1;
              plasmid_number = id_arr_start_index + gp_cell_seq_counter;
              plasmid_id=plasmid_id_arr.GetAt(plasmid_number-1);
              TrcTrace(Translate("plasmid_id: "), plasmid_id);
              labware_id = SeqGetLabwareId(gp_cell_seq);
              well_id = SeqGetPositionId(gp_cell_seq);
              TrcTrace(Translate("well_id: "), well_id);
              LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, Translate("plasmid"), plasmid_id);
              SeqIncrement(gp_cell_seq, 1);
            }
          }
        }
      }
    }
  }
  MECC::TraceComment(Translate("**** end CalculateOutputs sub-method ****"));
}

private function SaveWorklistAndMetadata(  ) void {
  private variable row_id;
  private variable well_id;
  private variable plasmid;
  private variable strain;
  private variable position;
  private variable column_id;
  private variable column_id_str;
  private file file1;
  private variable iniFilePath;
  private variable iniDir;
  private variable iniExists;
  private variable loopCounter2;
  private variable inducer_conc;
  private variable additive_conc;
  private variable inducer_id;
  private variable inducer_units;
  private variable additive_id;
  private variable additive_units;
  MECC::TraceComment(Translate("**** start SaveWorklistAndMetadata sub-method ****"));
  file1.AddField("position", position, hslInteger);
  file1.AddField("well", well_id, hslString, 255);
  file1.AddField("row", row_id, hslString, 255);
  file1.AddField("column", column_id, hslInteger);
  file1.AddField("media", media_1_id, hslString, 255);
  file1.AddField("strain", strain, hslString, 255);
  file1.AddField("plasmid", plasmid, hslString, 255);
  file1.SetDelimiter(hslCSVDelimited);
  if( 0 == file1.Open(worklist_file_path, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, worklist_file_path, "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    ML_STAR.Growth_Plate.SetCurrentPosition(1);
    while (
       (ML_STAR.Growth_Plate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.Growth_Plate, 1);
      loopCounter2 = loopCounter2 + 1;
      position = ML_STAR.Growth_Plate.GetCurrentPosition();
      well_id = SeqGetPositionId(ML_STAR.Growth_Plate);
      row_id = StrLeft(well_id, 1);
      column_id_str = StrMid(well_id, 1, 2);
      column_id = StrIVal(column_id_str);
      strain = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("strain"));
      plasmid = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("plasmid"));
      if( 0 == file1.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      SeqIncrement(ML_STAR.Growth_Plate, 1);
      if (
         (ML_STAR.Growth_Plate.GetCurrentPosition() > 0 && ML_STAR.Growth_Plate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.Growth_Plate.SetMax(ML_STAR.Growth_Plate.GetTotal());
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  iniDir = HSLExtensions::File::GetDirectoryName(worklist_file_path);
  iniFilePath = iniDir + "\\schema.ini";
  iniExists = HSLExtensions::File::Exists(iniFilePath);
  if (iniExists == 1)
  {
    HSLExtensions::File::Delete(iniFilePath);
  }
  MECC::TraceComment(Translate("**** end SaveWorklistAndMetadata sub-method ****"));
}

private function GetParams(  ) void {
  private variable plate_num_str;
  private dialog customDialog_1;
  private dialog customDialog_2;
  private variable plasmid_id;
  private variable plas_num_str;
  private variable plas_num;
  private dialog customDialog_3;
  private variable plasmid_file_path;
  private variable param_dict;
  private variable read_line;
  private file file1;
  private variable has_key;
  private dialog dialogHandle1;
  private dialog dialogHandle2;
  private variable loc;
  private variable loopCounter2;
  private variable split_line[];
  private variable plasmid_num;
  private variable plasmid_key;
  MECC::TraceComment(Translate("**** Start GetParams sub-method ****"));
  customDialog_1.InitCustomDialog("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");
  customDialog_1.ShowCustomDialog();
  worklist_file_path = customDialog_1.GetCustomDialogProperty( "path1.Path" );
  customDialog_3.InitCustomDialog("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");
  customDialog_3.ShowCustomDialog();
  plasmid_file_path = customDialog_3.GetCustomDialogProperty( "path1.Path" );
  param_dict = "param_dict";
  HSLExtensions::Dictionary::CreateDictionary(param_dict, 2);
  file1.AddField(1, read_line, hslString);
  file1.SetDelimiter(hslAsciiText);
  if( 0 == file1.Open(plasmid_file_path, hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, plasmid_file_path, "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    while (
       (file1.Eof() == 0)
    )
    {
      loopCounter2 = loopCounter2 + 1;
      if( 0 == file1.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      loc = StrFind(read_line, ",");
      if (loc > 0)
      {
        split_line = HSLExtensions::String::Split(read_line, Translate(","), 1);
        HSLExtensions::Dictionary::AddItem(param_dict, split_line.ElementAt( 1 -1), split_line.ElementAt( 2 -1));
      }
    }
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  has_key = HSLExtensions::Dictionary::ExistsItem(param_dict, Translate("strain1"));
  if (has_key == 1)
  {
    strain_1_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("strain1"));
  }
  else
  {
    strain_1_id = Translate("NEB10B");
  }
  plasmid_id_arr.SetSize(0);
  TrcTrace4(Translate("****    "), Translate("num_variants"), Translate(": "), num_variants);
  {
    for(plasmid_num = 0; plasmid_num < 32;)
    {
      plasmid_num = plasmid_num + 1;
      plasmid_key = StrConcat2(Translate("plasmid_"), plasmid_num);
      plasmid_id = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), plasmid_key);
      plasmid_id_arr.AddAsLast(plasmid_id);
      TrcTrace4(Translate("****    "), plasmid_key, Translate(": "), plasmid_id);
    }
  }
  is_pipetting = ASWGLOBAL::BOOL::TRUE;
  culture_volume = 500;
  is_gp_1 = ASWGLOBAL::BOOL::TRUE;
  is_gp_2 = ASWGLOBAL::BOOL::FALSE;
  customDialog_2.InitCustomDialog("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");
  customDialog_2.SetCustomDialogProperty( "gp_1_button.IsChecked", is_gp_1 );
  customDialog_2.SetCustomDialogProperty( "gp_2_button.IsChecked", is_gp_2 );
  customDialog_2.ShowCustomDialog();
  is_gp_1 = customDialog_2.GetCustomDialogProperty( "gp_1_button.IsChecked" );
  is_gp_2 = customDialog_2.GetCustomDialogProperty( "gp_2_button.IsChecked" );
  if (is_gp_1 == ASWGLOBAL::BOOL::TRUE)
  {
    plate_number = 1;
    dilution_factor = 10;
    TrcTrace(Translate("Pipetting to prepare Growth Plate number: "), Translate("1"));
  }
  else
  {
    plate_number = 2;
    dilution_factor = 50;
    TrcTrace(Translate("Pipetting to prepare Growth Plate number: "), Translate("2"));
  }
  num_variants = 32;
  media_1_id = Translate("M9-2x-gly-kan");
}
