global device ML_STAR ("efr_MPE2_001.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMPELib.hsl" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "..\\HSLTrcLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
#include "efr_MPE2_001.res"
variable MaxHeight;
variable HeightOffSet;
variable SpacerHeight;
variable MPE2COMPort;
variable SimMode;
variable BPlateHB;
variable FPlateHA;
variable FPlateHB;
variable BPlateHNoz;
variable EPlateH;
variable FPlateHNoz;
variable BPlateHA;
variable MPE2DevID;
variable FPlateNozOffset;
variable MPE2Waste;
dialog customDialog_1;
dialog customDialog_2;
dialog customDialog_3;
variable BPlateNozOffset;
dialog customDialog_4;
dialog customDialog_5;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("********************************************\nGet Definitions\nInitialize\n********************************************"));
    Definitions();
    Initialize();
    MECC::TraceComment(Translate("***************************************************************\nTransfer contents of filter plate into binding plate\n***************************************************************"));
    FiltertoBindingPlate();
    MECC::TraceComment(Translate("***************************************************************\nWash binding plate with Buffer PB (1st time)\n***************************************************************"));
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    WashBindingPlate();
    MECC::TraceComment(Translate("***************************************************************\nWash binding plate with Buffer PE (1st time)\n***************************************************************"));
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    WashBindingPlate();
    MECC::TraceComment(Translate("***************************************************************\nWash binding plate with Buffer PE (2nd time)\n***************************************************************"));
    customDialog_3.InitCustomDialog("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");
    customDialog_3.ShowCustomDialog();
    WashBindingPlate();
    MECC::TraceComment(Translate("***************************************************************\nDry binding plate\n***************************************************************"));
    customDialog_5.InitCustomDialog("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");
    customDialog_5.ShowCustomDialog();
    DryBindingPlate();
    MECC::TraceComment(Translate("***************************************************************\nElute contents of binding plate into elution plate\n***************************************************************"));
    customDialog_4.InitCustomDialog("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");
    customDialog_4.ShowCustomDialog();
    EluteFromBindingPlate();
  } }
