#pragma once
#include "STAR Tools\\STAR Tip Tools.hs_"
#include "HSLTrcLib.hsl"
#include "HSLML_STARLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace GSF_IMS_SHARED_SUBMETHODS {
  private function ErrorHandling_TipPickup( sequence & seq_TipsToUse, device & STAR ) void ;
  function TipPickupWithErrorHandling( sequence & seq_tipsForPickup, device & STAR ) void ;
  function pipette_PBS( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable pre_wet_tips, sequence & pre_wet_asp, sequence & pre_wet_disp, device & STAR, sequence & tips ) void ;
  function pipette_dil_series( sequence & from_seq, sequence & to_seq, variable p_vol, variable m_vol, variable number_channels, device & STAR, sequence & tips ) void ;
  function pipette_inducer( sequence & asp_seq, sequence & disp_seq, variable p_vol, device & STAR, sequence & tips ) void ;
  function pipette_media( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable pre_wet_tips, sequence & pre_wet_asp, sequence & pre_wet_disp, device & STAR, sequence & tips ) void ;
  function pipette_selector( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable pre_wet_tips, sequence & pre_wet_asp, sequence & pre_wet_disp, device & STAR, sequence & tips ) void ;
  function transfer_cells( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable asp_height, variable asp_retract_dist, sequence & tip_seq, device & STAR ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    STAR_TIP_TOOLS::_InitLibrary();
  }
  function _ExitLibrary() {
    STAR_TIP_TOOLS::_ExitLibrary();
  }

  function pipette_media( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable pre_wet_tips, sequence & pre_wet_asp, sequence & pre_wet_disp, device & STAR, sequence & tips ) void {
    if (pre_wet_tips == 1)
    {
      {
        sequence arrseqAspirate_1[];
        sequence arrseqDispense_1[];
        arrseqAspirate_1.SetSize(1);
        arrseqAspirate_1.SetAt(0, pre_wet_asp);
        arrseqDispense_1.SetSize(1);
        arrseqDispense_1.SetAt(0, pre_wet_disp);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 3);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 0);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseSubmergeDepth", 2);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
        PTL::SetPipettingState("DispenseFluidHeight", 0);
        PTL::SetPipettingState("DispenseMode", 3);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(STAR, tips, arrseqAspirate_1, arrseqDispense_1, 1, 1, p_vol, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", pre_wet_asp, pre_wet_disp) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
    }
    {
      sequence arrseqAspirate_2[];
      sequence arrseqDispense_2[];
      arrseqAspirate_2.SetSize(1);
      arrseqAspirate_2.SetAt(0, asp_seq);
      arrseqDispense_2.SetSize(1);
      arrseqDispense_2.SetAt(0, disp_seq);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 0.5);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(STAR, tips, arrseqAspirate_2, arrseqDispense_2, 1, 1, p_vol, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", asp_seq, disp_seq) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
  }

  function pipette_inducer( sequence & asp_seq, sequence & disp_seq, variable p_vol, device & STAR, sequence & tips ) void {
    private variable int_tip_type;
    MECC::TraceComment(Translate("**** start pipette_inducer shared sub-method ****"));
    TrcTrace(Translate("p_vol: "), p_vol);
    STAR_TIP_TOOLS::GetTipType(STAR, tips, int_tip_type);
    TrcTrace(Translate("int_tip_type: "), int_tip_type);
    if (int_tip_type == 1)
    {
      {
        sequence arrseqAspirate_3[];
        sequence arrseqDispense_3[];
        arrseqAspirate_3.SetSize(1);
        arrseqAspirate_3.SetAt(0, asp_seq);
        arrseqDispense_3.SetSize(1);
        arrseqDispense_3.SetAt(0, disp_seq);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 5);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 11);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseSubmergeDepth", 2);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
        PTL::SetPipettingState("DispenseFluidHeight", 0);
        PTL::SetPipettingState("DispenseMode", 3);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(STAR, tips, arrseqAspirate_3, arrseqDispense_3, 1, 1, p_vol, 0, 2, hslInfinite, hslInfinite, 1, "", asp_seq, disp_seq) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
    }
    else
    {
      if (int_tip_type == 5)
      {
        {
          sequence arrseqAspirate_4[];
          sequence arrseqDispense_4[];
          arrseqAspirate_4.SetSize(1);
          arrseqAspirate_4.SetAt(0, asp_seq);
          arrseqDispense_4.SetSize(1);
          arrseqDispense_4.SetAt(0, disp_seq);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(STAR, tips, arrseqAspirate_4, arrseqDispense_4, 1, 1, p_vol, 0, 2, hslInfinite, hslInfinite, 1, "", asp_seq, disp_seq) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
    }
    MECC::TraceComment(Translate("**** end pipette_inducer shard sub-method ****"));
  }

  function pipette_dil_series( sequence & from_seq, sequence & to_seq, variable p_vol, variable m_vol, variable number_channels, device & STAR, sequence & tips ) void {
    if (number_channels == 8)
    {
      {
        sequence arrseqAspirate_5[];
        sequence arrseqDispense_5[];
        arrseqAspirate_5.SetSize(1);
        arrseqAspirate_5.SetAt(0, from_seq);
        arrseqDispense_5.SetSize(1);
        arrseqDispense_5.SetAt(0, to_seq);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 3);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 0);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("AspiratePrerinsingMixCycles", 2);
        PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3);
        PTL::SetPipettingState("AspiratePrerinsingMixVolume", m_vol);
        PTL::SetPipettingState("DispenseSubmergeDepth", 2);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
        PTL::SetPipettingState("DispenseFluidHeight", 0);
        PTL::SetPipettingState("DispenseMode", 3);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(STAR, tips, arrseqAspirate_5, arrseqDispense_5, 1, 1, p_vol, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", from_seq, to_seq) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
    }
    else
    {
      if (number_channels == 4)
      {
        {
          sequence arrseqAspirate_6[];
          sequence arrseqDispense_6[];
          arrseqAspirate_6.SetSize(1);
          arrseqAspirate_6.SetAt(0, from_seq);
          arrseqDispense_6.SetSize(1);
          arrseqDispense_6.SetAt(0, to_seq);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 3);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", 6);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 0);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "00111100");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "00111100");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "00111100");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "00111100");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("AspiratePrerinsingMixCycles", 2);
          PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixVolume", m_vol);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "00111100");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(STAR, tips, arrseqAspirate_6, arrseqDispense_6, 1, 1, p_vol, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", from_seq, to_seq) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
      if (number_channels == 7)
      {
        {
          sequence arrseqAspirate_7[];
          sequence arrseqDispense_7[];
          arrseqAspirate_7.SetSize(1);
          arrseqAspirate_7.SetAt(0, from_seq);
          arrseqDispense_7.SetSize(1);
          arrseqDispense_7.SetAt(0, to_seq);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 3);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 0);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "11111110");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "11111110");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "11111110");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "11111110");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("AspiratePrerinsingMixCycles", 2);
          PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixVolume", m_vol);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "11111110");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(STAR, tips, arrseqAspirate_7, arrseqDispense_7, 1, 1, p_vol, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", from_seq, to_seq) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
      if (number_channels == 6)
      {
        {
          sequence arrseqAspirate_8[];
          sequence arrseqDispense_8[];
          arrseqAspirate_8.SetSize(1);
          arrseqAspirate_8.SetAt(0, from_seq);
          arrseqDispense_8.SetSize(1);
          arrseqDispense_8.SetAt(0, to_seq);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 3);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 0);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "01111110");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "01111110");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "01111110");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "01111110");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("AspiratePrerinsingMixCycles", 2);
          PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixVolume", m_vol);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "01111110");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(STAR, tips, arrseqAspirate_8, arrseqDispense_8, 1, 1, p_vol, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", from_seq, to_seq) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
    }
  }

  function pipette_selector( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable pre_wet_tips, sequence & pre_wet_asp, sequence & pre_wet_disp, device & STAR, sequence & tips ) void {
    if (pre_wet_tips == 1)
    {
      {
        sequence arrseqAspirate_9[];
        sequence arrseqDispense_9[];
        arrseqAspirate_9.SetSize(1);
        arrseqAspirate_9.SetAt(0, pre_wet_asp);
        arrseqDispense_9.SetSize(1);
        arrseqDispense_9.SetAt(0, pre_wet_disp);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 3);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 0);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseSubmergeDepth", 2);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
        PTL::SetPipettingState("DispenseFluidHeight", 0);
        PTL::SetPipettingState("DispenseMode", 3);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(STAR, tips, arrseqAspirate_9, arrseqDispense_9, 1, 1, p_vol, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", pre_wet_asp, pre_wet_disp) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
    }
    {
      sequence arrseqAspirate_10[];
      sequence arrseqDispense_10[];
      arrseqAspirate_10.SetSize(1);
      arrseqAspirate_10.SetAt(0, asp_seq);
      arrseqDispense_10.SetSize(1);
      arrseqDispense_10.SetAt(0, disp_seq);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 5);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslFalse);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(STAR, tips, arrseqAspirate_10, arrseqDispense_10, 1, 1, p_vol, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", asp_seq, disp_seq) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
  }

  function transfer_cells( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable asp_height, variable asp_retract_dist, sequence & tip_seq, device & STAR ) void {
    private variable loopCounter4;
    MECC::TraceComment(Translate("****** Start transfer_cells sub-method *******"));
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(STAR);
    {
      loopCounter4 = 0;
      asp_seq.SetCurrentPosition(1);
      disp_seq.SetCurrentPosition(1);
      while (
         (asp_seq.GetCurrentPosition() > 0)
      && (disp_seq.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, asp_seq, 1, disp_seq, 1);
        loopCounter4 = loopCounter4 + 1;
        TipPickupWithErrorHandling(tip_seq, STAR);
        STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (asp_seq.GetCurrentPosition() > 0 && asp_seq.GetMax() == 0 )
        && (disp_seq.GetCurrentPosition() > 0 && disp_seq.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      asp_seq.SetMax(asp_seq.GetTotal());
      disp_seq.SetMax(disp_seq.GetTotal());
      asp_seq.SetCurrentPosition(1);
      disp_seq.SetCurrentPosition(1);
    }
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(STAR);
    MECC::TraceComment(Translate("****** End transfer_cells sub-method *******"));
  }

  private function ErrorHandling_TipPickup( sequence & seq_TipsToUse, device & STAR ) void {
    private variable SimOn;
    private variable int_tip_type;
    private variable str_tip_type;
    private variable Tip_Counter;
    private variable var_PickupPattern;
    private variable arr_ChannelsNoTip[];
    private variable channelIndex;
    private variable firmwareCommand;
    private variable firmwareReturn;
    private variable var_TipPickupPattern;
    private variable isTipPresent;
    private variable loopCounter_ChannelsNoTips;
    private variable var_NumberChannelsWithNoTips;
    private variable var_NoTipChannelString;
    private variable var_Channel;
    private variable flag_SkipToNextTipRack;
    private variable var_TipSequenceCurrentPosition;
    private variable var_NumberTipsRemaining;
    private variable var_TipSequenceEndPosition;
    private dialog customDialog_11;
    private variable var_DialogBoxString;
    private variable ret_AbortMethod;
    private variable ret_ReloadTips;
    private variable ret_RetryNextTipRack;
    private variable int_tips_picked_up;
    private variable loopCounter8;
    private dialog customDialog_12;
    MECC::TraceComment(Translate("START TIP PICKUP ERROR HANDLING"));
    SimOn = HSLML_STAR::IsSimulatorMode(STAR);
    if (SimOn == 0)
    {
      STAR_TIP_TOOLS::GetTipType(STAR, seq_TipsToUse, int_tip_type);
      if (int_tip_type == 23)
      {
        Tip_Counter = "tip_counter_50";
        str_tip_type = "50 uL tips";
      }
      if (int_tip_type == 1)
      {
        Tip_Counter = "tip_counter_300";
        str_tip_type = "300 uL tips";
      }
      if (int_tip_type == 5)
      {
        Tip_Counter = "tip_counter_1000";
        str_tip_type = "1000 uL tips";
      }
      var_PickupPattern = Translate("");
      arr_ChannelsNoTip.SetSize(0);
      {
        for(channelIndex = 0; channelIndex < 8;)
        {
          channelIndex = channelIndex + 1;
          firmwareCommand = StrConcat4(Translate("P"), channelIndex, Translate("RW"), Translate(""));
          STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          isTipPresent = StrMid(firmwareReturn, 5, 1);
          if (isTipPresent == "1")
          {
            var_TipPickupPattern = Translate("0");
          }
          else
          {
            var_TipPickupPattern = Translate("1");
            arr_ChannelsNoTip.AddAsLast(channelIndex);
          }
          var_PickupPattern = var_PickupPattern + var_TipPickupPattern;
        }
      }
      var_NumberChannelsWithNoTips=arr_ChannelsNoTip.GetSize();
      var_NoTipChannelString = Translate("");
      {
        for(loopCounter_ChannelsNoTips = 0; loopCounter_ChannelsNoTips < var_NumberChannelsWithNoTips;)
        {
          loopCounter_ChannelsNoTips = loopCounter_ChannelsNoTips + 1;
          var_Channel=arr_ChannelsNoTip.GetAt(loopCounter_ChannelsNoTips-1);
          var_Channel = StrIStr(var_Channel);
          if (loopCounter_ChannelsNoTips != 1)
          {
            var_Channel = StrConcat2(Translate(", "), var_Channel);
          }
          var_NoTipChannelString = var_NoTipChannelString + var_Channel;
        }
      }
      var_TipSequenceCurrentPosition = seq_TipsToUse.GetCurrentPosition();
      var_TipSequenceEndPosition = seq_TipsToUse.GetCount();
      var_NumberTipsRemaining = var_TipSequenceEndPosition - var_TipSequenceCurrentPosition;
      var_NumberTipsRemaining = var_NumberTipsRemaining + 1;
      flag_SkipToNextTipRack = 1;
      if (var_NumberTipsRemaining <= 96)
      {
        flag_SkipToNextTipRack = 0;
      }
      var_DialogBoxString = StrConcat4(Translate("Channel(s) "), var_NoTipChannelString, Translate(" were not able to pick up the requested "), str_tip_type);
      customDialog_11.InitCustomDialog("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");
      customDialog_11.SetCustomDialogProperty( "radioButton2.IsEnabled", flag_SkipToNextTipRack );
      customDialog_11.SetCustomDialogProperty( "textBlock1.Text", var_DialogBoxString );
      customDialog_11.ShowCustomDialog();
      ret_AbortMethod = customDialog_11.GetCustomDialogProperty( "ReturnValue" );
      ret_ReloadTips = customDialog_11.GetCustomDialogProperty( "radioButton1.IsChecked" );
      ret_RetryNextTipRack = customDialog_11.GetCustomDialogProperty( "radioButton2.IsChecked" );
      if (ret_AbortMethod == 2)
      {
        abort;
      }
      int_tips_picked_up = 0;
      if (ret_ReloadTips == 1)
      {
        {
          loopCounter8 = 0;
          while (int_tips_picked_up == 0)
          {
            loopCounter8 = loopCounter8 + 1;
            PTL::ResetUnloadingStateAndSequences();
            PTL::SetUnloadingState("UserResponseTime", 0);
            PTL::SetUnloadingState("ErrorHandling", 3);
            PTL::SetUnloadingState("InitializeCustomStepID", 0);
            PTL::SetUnloadingState("UnloadCarrierCustomStepID", 0);
            PTL::SetUnloadingSize(1);
            PTL::SetUnloadingSequence(0, seq_TipsToUse, hslFalse, "");
            if( 0 == PTL::Unload(STAR) )
            {
                  PTL::RaiseRuntimeError(-1540095744, PTL::IDS::smartStepUnload, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
            }
            PTL::GetUnloadingSequence(0, seq_TipsToUse);
            customDialog_12.InitCustomDialog("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");
            customDialog_12.ShowCustomDialog();
            PTL::ResetLoadingStateAndSequences();
            PTL::SetLoadingState("UserResponseTime", hslInfinite);
            PTL::SetLoadingState("ErrorHandling", 5);
            PTL::SetLoadingState("InitializeCustomStepID", 0);
            PTL::SetLoadingState("LoadCarrierCustomStepID", 12);
            PTL::SetLoadingState("CalibrateCarrierCustomStepID", 0);
            PTL::SetLoadingState("CalibrateCarrierChannel", -1);
            PTL::SetLoadingSize(1);
            PTL::SetLoadingSequence(0, seq_TipsToUse, 1, -10, hslTrue, hslTrue, Tip_Counter);
            if( 0 == PTL::Load(STAR, hslTrue) )
            {
                  PTL::RaiseRuntimeError(-1556872960, PTL::IDS::smartStepLoad, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
            }
            PTL::GetLoadingSequence(0, seq_TipsToUse);
            STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
            onerror goto errLabel_13 ;
            err.Clear();
            STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            int_tips_picked_up = 1;
            errLabel_13 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
            }   /* end if from skip handler if no error */
          }
        }
      }
    }
    MECC::TraceComment(Translate("END TIP PICKUP ERROR HANDLING"));
  }

  function TipPickupWithErrorHandling( sequence & seq_tipsForPickup, device & STAR ) void {
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  TipPickupWithErrorHandling <<<<<<<<<<"));
    onerror goto errLabel_14 ;
    err.Clear();
    STAR_TIP_TOOLS::TipCheck(STAR, seq_tipsForPickup, Translate("tip_counter_1000"), 8);
    STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    errLabel_14 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      ErrorHandling_TipPickup(seq_tipsForPickup, STAR);
    }   /* end if from skip handler if no error */
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  TipPickupWithErrorHandling <<<<<<<<<<"));
  }

  function pipette_PBS( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable pre_wet_tips, sequence & pre_wet_asp, sequence & pre_wet_disp, device & STAR, sequence & tips ) void {
    MECC::TraceComment(Translate("**** start pipette_PBS shared sub-method ****"));
    if (pre_wet_tips == 1)
    {
      {
        sequence arrseqAspirate_15[];
        sequence arrseqDispense_15[];
        arrseqAspirate_15.SetSize(1);
        arrseqAspirate_15.SetAt(0, pre_wet_asp);
        arrseqDispense_15.SetSize(1);
        arrseqDispense_15.SetAt(0, pre_wet_disp);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 3);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 0);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 3);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseSubmergeDepth", 3);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
        PTL::SetPipettingState("DispenseFluidHeight", 0);
        PTL::SetPipettingState("DispenseMode", 3);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(STAR, tips, arrseqAspirate_15, arrseqDispense_15, 1, 1, p_vol, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", pre_wet_asp, pre_wet_disp) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
    }
    {
      sequence arrseqAspirate_16[];
      sequence arrseqDispense_16[];
      arrseqAspirate_16.SetSize(1);
      arrseqAspirate_16.SetAt(0, asp_seq);
      arrseqDispense_16.SetSize(1);
      arrseqDispense_16.SetAt(0, disp_seq);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 3);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 0.5);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(STAR, tips, arrseqAspirate_16, arrseqDispense_16, 1, 1, p_vol, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", asp_seq, disp_seq) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    MECC::TraceComment(Translate("**** end pipette_PBS shared sub-method ****"));
  }
} // library namespace
