#pragma once
#include "HSLStrLib.hsl"
#include "HSLSeqLib.hsl"
#include "HSLTrcLib.hsl"
#include "HSLExtensions\\String.hsl"
#include "HSLUtilLib.hsl"
#include "HSLExtensions\\File.hsl"
#include "HSLExtensions\\Directory.hsl"
#include "HSLFilLib.hsl"
#include "HSLTimLib.hsl"
#include "HSLLabwrAccess\\HSLLabwrAccess.hsl"
#include "C:\\Users\\djross\\Documents\\temp\\MLSTARLiquidClassLib\\MLSTARLiquidClassLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace LMSF_UTILITIES {
  variable delimiter;
  variable media_file_path;
  variable media_folder_path;
  variable units_list[];
  variable strain_file_path;
  variable strain_folder_path;
  variable plasmid_file_path;
  variable plasmid_folder_path;
  variable metadata_folder_path;
  variable additive_folder_path;
  variable additive_file_path;
  variable worklist_folder_path;
  variable antibiotic_file_path;
  variable antibiotic_folder_path;
  variable overlord_folder_path;
  private function CheckNewIdentifier( variable list_type, variable new_id, variable & not_valid_reason ) variable ;
  private function CreateNewMediaIdentifier(  ) variable ;
  private function CreateNewMetaIdentifier( variable list_type ) variable ;
  function GetAdditiveConcentration( variable additive_name, variable additive_prompt, variable & additive_units ) variable ;
  private function GetListFileHeaders( variable list_file_path, variable & name_header, variable & number_header, variable & long_header ) void ;
  function GetMetaIdentifier( variable list_type, variable select_prompt ) variable ;
  private function GetMetaList( variable & list[], variable & used_list[], variable list_type, variable & long_list[] ) void ;
  function GetOverlordFolderPath(  ) variable ;
  function GetTipTypeAndDispenseModeOfLiquidClass( variable i_strLiquidClassName, variable & o_intTiptype, variable & o_intDispenseMode ) void ;
  function GetTraceFile(  ) variable ;
  function GetWorklistFolderPath(  ) variable ;
  function ReadFirstOD( variable gen5_file_name, sequence & plate_seq, variable wavelength ) variable ;
  function ReadLastOD( variable gen5_file_name, sequence & plate_seq, variable wavelength ) variable ;
  function SaveToMetaDataFile( variable meta_file_path, variable experiment_id, variable step_str, variable auto_method, variable auto_trace, variable worklist_file_path, variable year_string, variable month_string, variable day_string, variable start_time_str, variable append_str ) void ;
  function SeqCopyProperties( sequence & input_sequence, variable & property_arr[], sequence & target_sequence ) void ;
  function SeqCopyPropsFromShortSeq( sequence & input_sequence, variable & property_arr[], sequence & target_sequence ) void ;
  function SeqSetPropertyByWell( variable labware_id, variable position_id, sequence & target_sequence, variable property_str, variable property_value ) variable ;
  function SeqTransferProperties( sequence & input_sequence, variable & property_arr[], sequence & target_sequence ) void ;
  function SeqZShift( sequence input_sequence, variable z_shift, device & ML_STAR ) void ;
  function SharedParameters(  ) void ;
  private function SortAndSaveMetaList( variable & list[], variable & used_list[], variable list_type, variable selected_index, variable & long_list[] ) void ;
  function SortArray( variable & key_array[], variable & value_array[] ) void ;
  function SortMetaList( variable & key_array[], variable & value_array[], variable & long_array[] ) void ;
  function TraceSeqProperties( sequence & input_sequence, variable & property_arr[] ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function SortArray( variable & key_array[], variable & value_array[] ) void {
    private variable counter_plus_1;
    private variable key_length;
    private variable loopCounter2;
    private variable key_1;
    private variable loopCounter3;
    private variable value_1;
    private variable key_2;
    private variable value_2;
    private variable key_loop_length;
    private variable switched;
    MECC::TraceComment(Translate("====================================\nBegin SortArray sub-method\n===================================="));
    switched = 1;
    key_length=key_array.GetSize();
    key_loop_length = key_length - 1;
    {
      loopCounter2 = 0;
      while (switched == 1)
      {
        loopCounter2 = loopCounter2 + 1;
        switched = 0;
        {
          for(loopCounter3 = 0; loopCounter3 < key_loop_length;)
          {
            loopCounter3 = loopCounter3 + 1;
            value_1=value_array.GetAt(loopCounter3-1);
            counter_plus_1 = loopCounter3 + 1;
            value_2=value_array.GetAt(counter_plus_1-1);
            if (value_2 > value_1)
            {
              switched = 1;
              key_1=key_array.GetAt(loopCounter3-1);
              key_2=key_array.GetAt(counter_plus_1-1);
              key_array.SetAt(counter_plus_1-1, key_1);
              key_array.SetAt(loopCounter3-1, key_2);
              value_array.SetAt(counter_plus_1-1, value_1);
              value_array.SetAt(loopCounter3-1, value_2);
            }
          }
        }
      }
    }
    MECC::TraceComment(Translate("====================================\nEnd SortArray sub-method\n===================================="));
  }

  private function GetListFileHeaders( variable list_file_path, variable & name_header, variable & number_header, variable & long_header ) void {
    private file list_file;
    private variable header_arr[];
    private variable header_string;
    name_header = 0;
    number_header = 0;
    long_header = 0;
    MECC::TraceComment(Translate("====================================\nBegin GetListFileHeaders sub-method\n===================================="));
    SharedParameters();
    list_file.AddField(1, header_string, hslString);
    list_file.SetDelimiter(hslAsciiText);
    if( 0 == list_file.Open(list_file_path, hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, list_file_path, "HxMetEdCompCmd");
    }
    if( 0 == list_file.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != list_file.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    list_file.RemoveFields();
    header_arr = HSLExtensions::String::Split(header_string, delimiter, 1);
    name_header=header_arr.GetAt(1-1);
    number_header=header_arr.GetAt(2-1);
    long_header=header_arr.GetAt(3-1);
    StrTrimLeft(name_header, "\"");
    StrTrimRight(name_header, "\"");
    StrTrimLeft(number_header, "\"");
    StrTrimRight(number_header, "\"");
    StrTrimLeft(long_header, "\"");
    StrTrimRight(long_header, "\"");
    MECC::TraceComment(Translate("====================================\nEnd GetListFileHeaders sub-method\n===================================="));
  }

  function SharedParameters(  ) void {
    delimiter = ",";
    worklist_folder_path = "C:\\Shared Files\\Data\\";
    metadata_folder_path = "C:\\Shared Files\\MetaData Schema\\";
    overlord_folder_path = "C:\\Shared Files\\Overlord-Venus\\";
    units_list.SetSize(0);
    units_list.AddAsLast("mmol/L");
    units_list.AddAsLast("umol/L");
    units_list.AddAsLast("mg/mL");
    units_list.AddAsLast("ug/mL");
    units_list.AddAsLast("ug/L");
    units_list.AddAsLast("%");
    media_folder_path = metadata_folder_path + "MediaList\\";
    media_file_path = media_folder_path + Translate("MediaList.csv");
    strain_folder_path = metadata_folder_path + "StrainList\\";
    strain_file_path = strain_folder_path + Translate("StrainList.csv");
    plasmid_folder_path = metadata_folder_path + "PlasmidList\\";
    plasmid_file_path = plasmid_folder_path + Translate("PlasmidList.csv");
    additive_folder_path = metadata_folder_path + "AdditiveList\\";
    additive_file_path = additive_folder_path + Translate("AdditiveList.csv");
    antibiotic_folder_path = metadata_folder_path + "AntibioticList\\";
    antibiotic_file_path = antibiotic_folder_path + "AntibioticList.csv";
  }

  function GetMetaIdentifier( variable list_type, variable select_prompt ) variable {
    private variable User_choice;
    private variable list_plus_new[];
    private variable create_new_text;
    private variable loopCounter1;
    private variable meta_list[];
    private variable meta_used_list[];
    private variable meta_list_length;
    private variable meta_index;
    private variable select_title;
    private dialog customDialog_1;
    private variable long_list[];
    private variable meta_ID;
    MECC::TraceComment(Translate("====================================\nBegin GetMetaIdentifier sub-method\n===================================="));
    SharedParameters();
    meta_ID = "";
    if (list_type == "media")
    {
      create_new_text = "Create New Media Identifier";
      select_title = "Select Media";
      if (select_prompt == "")
      {
        select_prompt = "Select the base media used for the method:";
      }
    }
    if (list_type == "strain")
    {
      create_new_text = "Create New Strain Identifier";
      select_title = "Select Strain";
      if (select_prompt == "")
      {
        select_prompt = "Select the strain used for the method:";
      }
    }
    if (list_type == "plasmid")
    {
      create_new_text = "Create New Plasmid Identifier";
      select_title = "Select Plasmid";
      if (select_prompt == "")
      {
        select_prompt = "Select the plasmid used for the method:";
      }
    }
    if (list_type == "additive")
    {
      create_new_text = "Create New Additive Identifier";
      select_title = "Select Additive";
      if (select_prompt == "")
      {
        select_prompt = "Select the additive used for the method:";
      }
    }
    if (list_type == "antibiotic")
    {
      create_new_text = "Create New Antibiotic Identifier";
      select_title = "Select Antibiotic";
      if (select_prompt == "")
      {
        select_prompt = "Select the antibiotic used for the method:";
      }
    }
    GetMetaList(meta_list, meta_used_list, list_type, long_list);
    meta_list_length=meta_list.GetSize();
    meta_index = meta_list_length + 1;
    {
      loopCounter1 = 0;
      while (meta_index > meta_list_length)
      {
        loopCounter1 = loopCounter1 + 1;
        meta_list_length=meta_list.GetSize();
        list_plus_new=meta_list;
        list_plus_new.AddAsLast(create_new_text);
        customDialog_1.InitCustomDialog("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");
        customDialog_1.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", list_plus_new );
        customDialog_1.SetCustomDialogProperty( "Title", select_title );
        customDialog_1.SetCustomDialogProperty( "textBlock.Text", select_prompt );
        customDialog_1.ShowCustomDialog();
        User_choice = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
        meta_index = customDialog_1.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
        meta_ID = customDialog_1.GetCustomDialogProperty( "comboBox1.Text" );
        if (User_choice == 2)
        {
          abort;
        }
        if (meta_index > meta_list_length)
        {
          if (list_type == "media")
          {
            MECC::TraceComment(Translate("=======================================\nUser input: create new media identifier\n======================================="));
            meta_ID = CreateNewMediaIdentifier();
          }
          else
          {
            if (list_type == "strain")
            {
              MECC::TraceComment(Translate("=======================================\nUser input: create new strain identifier\n======================================="));
            }
            if (list_type == "plasmid")
            {
              MECC::TraceComment(Translate("=======================================\nUser input: create new plasmid identifier\n======================================="));
            }
            if (list_type == "additive")
            {
              MECC::TraceComment(Translate("=======================================\nUser input: create new additive identifier\n======================================="));
            }
            if (list_type == "antibiotic")
            {
              MECC::TraceComment(Translate("=======================================\nUser input: create new antibiotic identifier\n======================================="));
            }
            meta_ID = CreateNewMetaIdentifier(list_type);
          }
          GetMetaList(meta_list, meta_used_list, list_type, long_list);
        }
      }
    }
    SortAndSaveMetaList(meta_list, meta_used_list, list_type, meta_index, long_list);
    MECC::TraceComment(Translate("====================================\nEnd GetMetaIdentifier sub-method\n===================================="));
    return (meta_ID);
  }

  private function GetMetaList( variable & list[], variable & used_list[], variable list_type, variable & long_list[] ) void {
    private variable name_head;
    private variable number_head;
    private variable loopCounter1;
    private variable file_path;
    private file list_file;
    private variable meta_used;
    private variable meta_id;
    private variable long_head;
    private variable meta_long;
    list.SetSize( 0);
    used_list.SetSize( 0);
    long_list.SetSize( 0);
    MECC::TraceComment(Translate("====================================\nBegin GetMetaList sub-method\n===================================="));
    if (list_type == "media")
    {
      file_path = media_file_path;
    }
    if (list_type == "strain")
    {
      file_path = strain_file_path;
    }
    if (list_type == "plasmid")
    {
      file_path = plasmid_file_path;
    }
    if (list_type == "additive")
    {
      file_path = additive_file_path;
    }
    if (list_type == "antibiotic")
    {
      file_path = antibiotic_file_path;
    }
    GetListFileHeaders(file_path, name_head, number_head, long_head);
    list_file.AddField(name_head, meta_id, hslString, 255);
    list_file.AddField(number_head, meta_used, hslInteger);
    list_file.AddField(long_head, meta_long, hslString, 255);
    list_file.SetDelimiter(delimiter);
    if( 0 == list_file.Open(file_path, hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, file_path, "HxMetEdCompCmd");
    }
    list.SetSize(0);
    used_list.SetSize(0);
    long_list.SetSize(0);
    {
      loopCounter1 = 0;
      while (
         (list_file.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == list_file.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        list.AddAsLast(meta_id);
        used_list.AddAsLast(meta_used);
        long_list.AddAsLast(meta_long);
      }
    }
    if( 0 != list_file.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    list_file.RemoveFields();
    MECC::TraceComment(Translate("====================================\nEnd GetMetaList sub-method\n===================================="));
  }

  private function SortAndSaveMetaList( variable & list[], variable & used_list[], variable list_type, variable selected_index, variable & long_list[] ) void {
    private variable name_head;
    private variable number_head;
    private variable loopCounter1;
    private variable file_path;
    private file list_file;
    private variable meta_used;
    private variable meta_id;
    private variable list_length;
    private variable long_head;
    private variable long_name;
    MECC::TraceComment(Translate("====================================\nBegin SortAndSaveMetaList sub-method\n===================================="));
    if (list_type == "media")
    {
      file_path = media_file_path;
    }
    if (list_type == "strain")
    {
      file_path = strain_file_path;
    }
    if (list_type == "plasmid")
    {
      file_path = plasmid_file_path;
    }
    if (list_type == "additive")
    {
      file_path = additive_file_path;
    }
    if (list_type == "antibiotic")
    {
      file_path = antibiotic_file_path;
    }
    GetListFileHeaders(file_path, name_head, number_head, long_head);
    if (selected_index > 0)
    {
      meta_used=used_list.GetAt(selected_index-1);
      meta_used = meta_used + 1;
      used_list.SetAt(selected_index-1, meta_used);
    }
    if(0){
      SortArray(list, used_list);
    }
    SortMetaList(list, used_list, long_list);
    list_file.AddField(name_head, meta_id, hslString, 255);
    list_file.AddField(number_head, meta_used, hslInteger);
    list_file.AddField(long_head, long_name, hslString, 255);
    list_file.SetDelimiter(delimiter);
    if( 0 == list_file.Open(file_path, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, file_path, "HxMetEdCompCmd");
    }
    list_length=list.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < list_length;)
      {
        loopCounter1 = loopCounter1 + 1;
        meta_id=list.GetAt(loopCounter1-1);
        meta_used=used_list.GetAt(loopCounter1-1);
        long_name=long_list.GetAt(loopCounter1-1);
        if( 0 == list_file.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != list_file.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    list_file.RemoveFields();
    MECC::TraceComment(Translate("====================================\nEnd SortAndSaveMetaList sub-method\n===================================="));
  }

  private function CreateNewMediaIdentifier(  ) variable {
    private variable loopCounter1;
    private variable is_valid_identifier;
    private dialog customDialog_2;
    private variable media_name;
    private dialog customDialog_3;
    private variable User_choice;
    private dialog customDialog_4;
    private variable ingedients_list[];
    private variable new_ingredient;
    private variable new_units;
    private variable new_concentration;
    private variable everything_list[];
    private variable everything_str;
    private variable everything_list_string;
    private variable loopCounter2;
    private dialog customDialog_5;
    private variable media_definition_file_path;
    private variable ingredient_conc_list[];
    private variable ingedients_units_list[];
    private file file1;
    private variable new_length;
    private variable loopCounter4;
    private variable list_type;
    private variable media_list[];
    private variable media_used_list[];
    private variable dialog_title;
    private variable not_valid_reason;
    private variable long_list[];
    private dialog customDialog_6;
    private variable long_media_name;
    MECC::TraceComment(Translate("====================================\nBegin CreateNewMediaIdentifier sub-method\n===================================="));
    SharedParameters();
    is_valid_identifier = 0;
    list_type = Translate("media");
    GetMetaList(media_list, media_used_list, list_type, long_list);
    {
      loopCounter1 = 0;
      while (is_valid_identifier == 0)
      {
        loopCounter1 = loopCounter1 + 1;
        customDialog_2.InitCustomDialog("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");
        customDialog_2.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", media_list );
        customDialog_2.ShowCustomDialog();
        User_choice = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
        media_name = customDialog_2.GetCustomDialogProperty( "textBox1.Text" );
        if (User_choice == 2)
        {
          media_name = Translate("");
          break;
        }
        is_valid_identifier = CheckNewIdentifier(Translate("media"), media_name, not_valid_reason);
        if (is_valid_identifier == 0)
        {
          customDialog_3.InitCustomDialog("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");
          customDialog_3.SetCustomDialogProperty( "textBlock1.Text", media_name );
          customDialog_3.SetCustomDialogProperty( "textBlock3.Text", not_valid_reason );
          customDialog_3.ShowCustomDialog();
        }
      }
    }
    if (is_valid_identifier == 1)
    {
      customDialog_6.InitCustomDialog("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");
      customDialog_6.ShowCustomDialog();
      User_choice = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
      long_media_name = customDialog_6.GetCustomDialogProperty( "textBox1.Text" );
      customDialog_4.InitCustomDialog("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");
      customDialog_4.ShowCustomDialog();
      User_choice = 1;
      ingedients_list.SetSize(0);
      ingredient_conc_list.SetSize(0);
      ingedients_units_list.SetSize(0);
      everything_list.SetSize(0);
      everything_list_string = Translate("");
      {
        loopCounter2 = 0;
        while (User_choice != 8)
        {
          loopCounter2 = loopCounter2 + 1;
          dialog_title = "Define New Media Composition: " + media_name;
          customDialog_5.InitCustomDialog("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");
          customDialog_5.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", units_list );
          customDialog_5.SetCustomDialogProperty( "Title", dialog_title );
          customDialog_5.SetCustomDialogProperty( "textBlock5.Text", everything_list_string );
          customDialog_5.ShowCustomDialog();
          User_choice = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
          new_ingredient = customDialog_5.GetCustomDialogProperty( "textBox1.Text" );
          new_concentration = customDialog_5.GetCustomDialogProperty( "numeric1.Value" );
          new_units = customDialog_5.GetCustomDialogProperty( "comboBox1.Text" );
          if (User_choice == 2)
          {
            ingedients_list.SetSize(0);
            break;
          }
          if (User_choice == 1)
          {
            ingedients_list.AddAsLast(new_ingredient);
            ingredient_conc_list.AddAsLast(new_concentration);
            ingedients_units_list.AddAsLast(new_units);
            everything_str = StrFStr(new_concentration);
            everything_str = everything_str + " ";
            everything_str = everything_str + new_units;
            everything_str = everything_str + " \t";
            everything_str = everything_str + new_ingredient;
            everything_str = everything_str + "\n";
            everything_list_string = everything_list_string + everything_str;
            everything_list.AddAsLast(everything_str);
          }
        }
      }
      media_definition_file_path = media_folder_path + media_name;
      media_definition_file_path = media_definition_file_path + "-media.csv";
      new_length=ingedients_list.GetSize();
      if (new_length > 0)
      {
        file1.AddField("Ingredient", new_ingredient, hslString, 255);
        file1.AddField("Concentration", new_concentration, hslFloat);
        file1.AddField("Units", new_units, hslString, 255);
        file1.SetDelimiter(delimiter);
        if( 0 == file1.Open(media_definition_file_path, hslWrite) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, media_definition_file_path, "HxMetEdCompCmd");
        }
        {
          for(loopCounter4 = 0; loopCounter4 < new_length;)
          {
            loopCounter4 = loopCounter4 + 1;
            new_ingredient=ingedients_list.GetAt(loopCounter4-1);
            new_concentration=ingredient_conc_list.GetAt(loopCounter4-1);
            new_units=ingedients_units_list.GetAt(loopCounter4-1);
            if( 0 == file1.WriteRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
        }
        if( 0 != file1.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        file1.RemoveFields();
        media_list.AddAsLast(media_name);
        media_used_list.AddAsLast(0);
        long_list.AddAsLast(long_media_name);
        SortAndSaveMetaList(media_list, media_used_list, list_type, 0, long_list);
      }
    }
    MECC::TraceComment(Translate("====================================\nEnd CreateNewMediaIdentifier sub-method\n===================================="));
    return (media_name);
  }

  private function CheckNewIdentifier( variable list_type, variable new_id, variable & not_valid_reason ) variable {
    private variable meta_list[];
    private variable meta_used_list[];
    private variable list_length;
    private variable loopCounter1;
    private variable is_valid;
    private variable existing_id;
    private variable long_list[];
    not_valid_reason = 0;
    MECC::TraceComment(Translate("====================================\nBegin CheckNewIdentifier sub-method\n===================================="));
    GetMetaList(meta_list, meta_used_list, list_type, long_list);
    list_length=meta_list.GetSize();
    is_valid = 1;
    existing_id = "";
    {
      for(loopCounter1 = 0; loopCounter1 < list_length;)
      {
        loopCounter1 = loopCounter1 + 1;
        existing_id=meta_list.GetAt(loopCounter1-1);
        if (new_id == existing_id)
        {
          is_valid = 0;
          not_valid_reason = "That identifier has already been used.";
        }
      }
    }
    MECC::TraceComment(Translate("====================================\nEnd CheckNewIdentifier sub-method\n===================================="));
    return (is_valid);
  }

  private function CreateNewMetaIdentifier( variable list_type ) variable {
    private variable is_valid_identifier;
    private dialog customDialog_7;
    private dialog customDialog_8;
    private variable User_choice;
    private variable loopCounter1;
    private variable meta_list[];
    private variable meta_used_list[];
    private variable list_plus_none[];
    private variable select_prompt;
    private variable select_title;
    private variable parent_name;
    private variable parent_index;
    private variable notes_prompt;
    private file file1;
    private variable title_text;
    private variable prompt_text;
    private variable new_name;
    private dialog customDialog_9;
    private dialog customDialog_10;
    private variable new_definition_file_path;
    private variable new_definition_string;
    private variable new_notes;
    private variable not_valid_reason;
    private variable has_parent;
    private dialog customDialog_11;
    private dialog customDialog_12;
    private variable long_list[];
    private dialog customDialog_13;
    private variable long_media_name;
    private variable long_promt;
    MECC::TraceComment(Translate("====================================\nBegin CreateNewMetaIdentifier sub-method\n===================================="));
    SharedParameters();
    is_valid_identifier = 0;
    GetMetaList(meta_list, meta_used_list, list_type, long_list);
    {
      loopCounter1 = 0;
      while (is_valid_identifier == 0)
      {
        loopCounter1 = loopCounter1 + 1;
        if (list_type == "strain")
        {
          title_text = "New Strain Identifier";
          prompt_text = "Enter New Strain Identifier\n    (e.g. \"MG1655\"):";
          long_promt = "Enter long name for new strain:";
        }
        if (list_type == "plasmid")
        {
          title_text = "New Plasmid Identifier";
          prompt_text = "Enter New Plasmid Identifier\n    (e.g. \"pGTGv3\"):";
          long_promt = "Enter long name for new plasmid:";
        }
        if (list_type == "additive")
        {
          title_text = "New Additive Identifier";
          prompt_text = "Enter New Additive Identifier\n    (e.g. \"IPTG\"):";
          long_promt = "Enter long name for new additive:";
        }
        if (list_type == "antibiotic")
        {
          title_text = "New Antibiotic Identifier";
          prompt_text = "Enter New Antibiotic Identifier\n    (e.g. \"kan\"):";
          long_promt = "Enter long name for new antibiotic:";
        }
        customDialog_8.InitCustomDialog("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");
        customDialog_8.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", meta_list );
        customDialog_8.SetCustomDialogProperty( "Title", title_text );
        customDialog_8.SetCustomDialogProperty( "textBlock.Text", prompt_text );
        customDialog_8.ShowCustomDialog();
        User_choice = customDialog_8.GetCustomDialogProperty( "ReturnValue" );
        new_name = customDialog_8.GetCustomDialogProperty( "textBox1.Text" );
        if (User_choice == 2)
        {
          new_name = Translate("");
          break;
        }
        is_valid_identifier = CheckNewIdentifier(list_type, new_name, not_valid_reason);
        if (is_valid_identifier == 0)
        {
          customDialog_7.InitCustomDialog("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");
          customDialog_7.SetCustomDialogProperty( "textBlock1.Text", new_name );
          customDialog_7.SetCustomDialogProperty( "textBlock3.Text", not_valid_reason );
          customDialog_7.ShowCustomDialog();
        }
      }
    }
    if (is_valid_identifier == 1)
    {
      customDialog_13.InitCustomDialog("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");
      customDialog_13.SetCustomDialogProperty( "textBlock.Text", long_promt );
      customDialog_13.ShowCustomDialog();
      User_choice = customDialog_13.GetCustomDialogProperty( "ReturnValue" );
      long_media_name = customDialog_13.GetCustomDialogProperty( "textBox1.Text" );
      has_parent = 0;
      if (list_type == "strain")
      {
        customDialog_9.InitCustomDialog("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");
        customDialog_9.ShowCustomDialog();
        has_parent = 1;
      }
      if (list_type == "plasmid")
      {
        customDialog_10.InitCustomDialog("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");
        customDialog_10.ShowCustomDialog();
        has_parent = 1;
      }
      if (has_parent == 1)
      {
        list_plus_none=meta_list;
        list_plus_none.AddAsLast("none");
        if (list_type == "strain")
        {
          select_title = "Select Parent Strain For ";
          select_prompt = "Select the parent strain for new strain: ";
        }
        if (list_type == "plasmid")
        {
          select_title = "Select Parent Plasmid For ";
          select_prompt = "Select the parent plasmid for new plasmid: ";
        }
        select_title = select_title + new_name;
        select_prompt = select_prompt + new_name;
        customDialog_11.InitCustomDialog("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");
        customDialog_11.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", list_plus_none );
        customDialog_11.SetCustomDialogProperty( "Title", select_title );
        customDialog_11.SetCustomDialogProperty( "textBlock.Text", select_prompt );
        customDialog_11.ShowCustomDialog();
        User_choice = customDialog_11.GetCustomDialogProperty( "ReturnValue" );
        parent_index = customDialog_11.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
        parent_name = customDialog_11.GetCustomDialogProperty( "comboBox1.Text" );
        if (User_choice == 2)
        {
          new_name = Translate("");
        }
        else
        {
          if (list_type == "strain")
          {
            notes_prompt = "Enter Notes for New Strain: ";
            title_text = "New Strain Notes";
            new_definition_file_path = strain_folder_path + new_name;
            new_definition_file_path = new_definition_file_path + "-strain.txt";
            new_definition_string = "Strain identifier: \t" + new_name;
          }
          if (list_type == "plasmid")
          {
            notes_prompt = "Enter Notes for New Plasmid: ";
            title_text = "New Plasmid Notes";
            new_definition_file_path = plasmid_folder_path + new_name;
            new_definition_file_path = new_definition_file_path + "-plasmid.txt";
            new_definition_string = "Plasmid identifier: \t" + new_name;
          }
          notes_prompt = notes_prompt + new_name;
          customDialog_12.InitCustomDialog("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");
          customDialog_12.SetCustomDialogProperty( "Title", title_text );
          customDialog_12.ShowCustomDialog();
          new_notes = customDialog_12.GetCustomDialogProperty( "textBox1.Text" );
          new_definition_string = new_definition_string + "\n\n";
          new_definition_string = new_definition_string + "Parent identifier: \t";
          new_definition_string = new_definition_string + parent_name;
          new_definition_string = new_definition_string + "\n";
          new_definition_string = new_definition_string + "\n";
          new_definition_string = new_definition_string + "Notes:\n";
          new_definition_string = new_definition_string + new_notes;
          new_definition_string = new_definition_string + "\n";
          file1.AddField(1, new_definition_string, hslString);
          file1.SetDelimiter(hslAsciiText);
          if( 0 == file1.Open(new_definition_file_path, hslWrite) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, new_definition_file_path, "HxMetEdCompCmd");
          }
          if( 0 == file1.WriteRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 != file1.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          file1.RemoveFields();
        }
      }
    }
    else
    {
      new_name = Translate("");
    }
    if (new_name != "")
    {
      MECC::TraceComment(Translate("================================================================\nAdd new identifier to XXXXList.csv via SortAndSaveMetaList\n================================================================"));
      GetMetaList(meta_list, meta_used_list, list_type, long_list);
      meta_list.AddAsLast(new_name);
      long_list.AddAsLast(long_media_name);
      meta_used_list.AddAsLast(0);
      SortAndSaveMetaList(meta_list, meta_used_list, list_type, 0, long_list);
    }
    MECC::TraceComment(Translate("====================================\nEnd CreateNewMetaIdentifier sub-method\n===================================="));
    return (new_name);
  }

  function GetAdditiveConcentration( variable additive_name, variable additive_prompt, variable & additive_units ) variable {
    private dialog customDialog_14;
    private variable dialog_title;
    private variable User_choice;
    private variable new_units;
    private variable new_concentration;
    additive_units = 0;
    dialog_title = additive_name + " concentration?";
    if (additive_prompt == "")
    {
      additive_prompt = "Enter concentration and units:";
    }
    customDialog_14.InitCustomDialog("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");
    customDialog_14.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", units_list );
    customDialog_14.SetCustomDialogProperty( "Title", dialog_title );
    customDialog_14.SetCustomDialogProperty( "textBlock.Text", additive_prompt );
    customDialog_14.ShowCustomDialog();
    User_choice = customDialog_14.GetCustomDialogProperty( "ReturnValue" );
    new_concentration = customDialog_14.GetCustomDialogProperty( "numeric1.Value" );
    new_units = customDialog_14.GetCustomDialogProperty( "comboBox1.Text" );
    additive_units = new_units;
    return (new_concentration);
  }

  function SeqSetPropertyByWell( variable labware_id, variable position_id, sequence & target_sequence, variable property_str, variable property_value ) variable {
    private variable return_val;
    return_val = SeqLookupPosition(target_sequence, labware_id, position_id, 1, 1);
    if (return_val > 0)
    {
      SeqSetProperty(target_sequence, return_val, property_str, property_value);
    }
    return (return_val);
  }

  function GetWorklistFolderPath(  ) variable {
    SharedParameters();
    return (worklist_folder_path);
  }

  function SeqTransferProperties( sequence & input_sequence, variable & property_arr[], sequence & target_sequence ) void {
    private variable input_position;
    private variable target_position;
    private variable property_value;
    private variable arr_size;
    private variable loopCounter1;
    private variable property_str;
    input_position = input_sequence.GetCurrentPosition();
    target_position = target_sequence.GetCurrentPosition();
    arr_size=property_arr.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < arr_size;)
      {
        loopCounter1 = loopCounter1 + 1;
        property_str=property_arr.GetAt(loopCounter1-1);
        property_value = SeqGetProperty(input_sequence, input_position, property_str);
        SeqSetProperty(target_sequence, target_position, property_str, property_value);
      }
    }
  }

  function SeqCopyProperties( sequence & input_sequence, variable & property_arr[], sequence & target_sequence ) void {
    private variable property_value;
    private variable input_position;
    private variable arr_size;
    private variable property_str;
    private variable loopCounter1;
    private variable target_position;
    private variable loopCounter2;
    private variable labware_id;
    private variable position_id;
    private variable start_target_position;
    private variable start_input_position;
    private variable prop_type_arr[];
    private variable property_type;
    start_input_position = input_sequence.GetCurrentPosition();
    start_target_position = target_sequence.GetCurrentPosition();
    arr_size=property_arr.GetSize();
    prop_type_arr.SetSize(0);
    {
      for(loopCounter1 = 0; loopCounter1 < arr_size;)
      {
        loopCounter1 = loopCounter1 + 1;
        property_str=property_arr.GetAt(loopCounter1-1);
        property_value = SeqGetProperty(input_sequence, 1, property_str);
        property_type = StrGetType(property_value);
        prop_type_arr.AddAsLast(property_type);
      }
    }
    {
      loopCounter2 = 0;
      target_sequence.SetCurrentPosition(1);
      while (
         (target_sequence.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, target_sequence, 1);
        loopCounter2 = loopCounter2 + 1;
        target_position = target_sequence.GetCurrentPosition();
        labware_id = SeqGetLabwareId(target_sequence);
        position_id = SeqGetPositionId(target_sequence);
        input_position = SeqLookupPosition(input_sequence, labware_id, position_id, 1, 1);
        {
          for(loopCounter1 = 0; loopCounter1 < arr_size;)
          {
            loopCounter1 = loopCounter1 + 1;
            property_str=property_arr.GetAt(loopCounter1-1);
            if (input_position > 0)
            {
              property_value = SeqGetProperty(input_sequence, input_position, property_str);
            }
            else
            {
              property_type=prop_type_arr.GetAt(loopCounter1-1);
              if (property_type == "s")
              {
                property_value = "";
              }
              else
              {
                property_value = 0;
              }
            }
            SeqSetProperty(target_sequence, target_position, property_str, property_value);
          }
        }
        SeqIncrement(target_sequence, 1);
        if (
           (target_sequence.GetCurrentPosition() > 0 && target_sequence.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      target_sequence.SetMax(target_sequence.GetTotal());
    }
    target_sequence.SetCurrentPosition(start_target_position);
    input_sequence.SetCurrentPosition(start_input_position);
  }

  function TraceSeqProperties( sequence & input_sequence, variable & property_arr[] ) void {
    private variable property_value;
    private variable input_position;
    private variable arr_size;
    private variable property_str;
    private variable loopCounter1;
    private variable loopCounter2;
    private variable trace_str_1;
    private variable seq_name;
    private variable trace_str_2;
    private variable position_str;
    private variable variable_type;
    private variable position_id;
    private variable start_input_position;
    start_input_position = input_sequence.GetCurrentPosition();
    arr_size=property_arr.GetSize();
    seq_name = SeqGetName(input_sequence);
    trace_str_1 = "Trace for sequence, ";
    trace_str_1 = trace_str_1 + seq_name;
    {
      loopCounter2 = 0;
      input_sequence.SetCurrentPosition(1);
      while (
         (input_sequence.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, input_sequence, 1);
        loopCounter2 = loopCounter2 + 1;
        input_position = input_sequence.GetCurrentPosition();
        position_str = StrIStr(input_position);
        position_id = SeqGetPositionId(input_sequence);
        trace_str_2 = ", position: ";
        trace_str_2 = trace_str_2 + position_str;
        trace_str_2 = ", well: ";
        trace_str_2 = trace_str_2 + position_id;
        {
          for(loopCounter1 = 0; loopCounter1 < arr_size;)
          {
            loopCounter1 = loopCounter1 + 1;
            property_str=property_arr.GetAt(loopCounter1-1);
            trace_str_2 = trace_str_2 + ", ";
            trace_str_2 = trace_str_2 + property_str;
            trace_str_2 = trace_str_2 + ": ";
            property_value = SeqGetProperty(input_sequence, input_position, property_str);
            variable_type = StrGetType(property_value);
            if (variable_type == "f")
            {
              property_value = StrFStr(property_value);
            }
            else
            {
              if (variable_type == "i")
              {
                property_value = StrIStr(property_value);
              }
              else
              {
                if (variable_type == "s")
                {
                  property_value = property_value;
                }
                else
                {
                  property_value = "property value has no type";
                }
              }
            }
            trace_str_2 = trace_str_2 + property_value;
          }
        }
        TrcTrace(trace_str_1, trace_str_2);
        SeqIncrement(input_sequence, 1);
        if (
           (input_sequence.GetCurrentPosition() > 0 && input_sequence.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      input_sequence.SetMax(input_sequence.GetTotal());
      input_sequence.SetCurrentPosition(1);
    }
    input_sequence.SetCurrentPosition(start_input_position);
  }

  function ReadLastOD( variable gen5_file_name, sequence & plate_seq, variable wavelength ) variable {
    private variable read_line;
    private file file1;
    private variable loopCounter1;
    private variable reading_header;
    private variable string_find;
    private variable wavelength_str;
    private dialog customDialog_15;
    private variable err_str;
    private variable data_header_str;
    private variable data_str;
    private variable data_header_arr[];
    private variable data_arr[];
    private variable data_header_length;
    private variable data_length;
    private variable loopCounter2;
    private variable labware_id;
    private variable well;
    private variable od_str;
    private variable od_flt;
    private variable od_prop_str;
    private dialog dialogHandle_16;
    private variable return_value;
    private dialog customDialog_17;
    private dialog customDialog_18;
    MECC::TraceComment(Translate("------------------------------------------------------------------\nLMSF_Utilities.ReadLastOD\n------------------------------------------------------------------"));
    return_value = 0;
    file1.AddField(1, read_line, hslString);
    file1.SetDelimiter(hslAsciiText);
    if( 0 == file1.Open(gen5_file_name, hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, gen5_file_name, "HxMetEdCompCmd");
    }
    reading_header = 1;
    {
      loopCounter1 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (reading_header == 1)
        {
          string_find = StrFind(read_line, "Wavelengths:");
          if (string_find >= 0)
          {
            return_value = 1;
            wavelength_str = StrIStr(wavelength);
            string_find = StrFind(read_line, wavelength_str);
            if (string_find < 0)
            {
              err_str = "Data for the requested weavelength, ";
              err_str = err_str + wavelength_str;
              err_str = err_str + ", is not saved in the Gen5 output file.";
              customDialog_15.InitCustomDialog("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");
              customDialog_15.SetCustomDialogProperty( "textBlock.Text", err_str );
              customDialog_15.ShowCustomDialog();
              return_value = 0;
              break;
            }
            reading_header = 2;
          }
        }
        else
        {
          if (reading_header == 2)
          {
            if (read_line == wavelength_str)
            {
              if( 0 == file1.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              if( 0 == file1.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              data_header_str = read_line;
              reading_header = 0;
            }
          }
          else
          {
            if (reading_header == 0)
            {
              if (read_line != "")
              {
                data_str = read_line;
              }
              else
              {
                reading_header = 3;
              }
            }
            else
            {
              if (reading_header == 3)
              {
              }
              else
              {
              }
            }
          }
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    if (reading_header == 1)
    {
      customDialog_17.InitCustomDialog("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");
      customDialog_17.ShowCustomDialog();
    }
    else
    {
      data_header_arr = HSLExtensions::String::Split(data_header_str, ",", 0);
      data_arr = HSLExtensions::String::Split(data_str, ",", 0);
      data_header_length=data_header_arr.GetSize();
      data_length=data_arr.GetSize();
      if (data_length == data_header_length)
      {
        od_prop_str = "OD";
        SeqSetPropertyRange(plate_seq, 1, 96, od_prop_str, 0);
        SeqResetSequenceIndexes(plate_seq);
        labware_id = SeqGetLabwareId(plate_seq);
        {
          loopCounter2 = 0;
          while (loopCounter2 < data_length)
          {
            loopCounter2 = loopCounter2 + 1;
            well=data_header_arr.GetAt(loopCounter2-1);
            od_str=data_arr.GetAt(loopCounter2-1);
            od_flt = StrFVal(od_str);
            SeqSetPropertyByWell(labware_id, well, plate_seq, od_prop_str, od_flt);
          }
        }
      }
      else
      {
        return_value = 0;
        customDialog_18.InitCustomDialog("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");
        customDialog_18.ShowCustomDialog();
      }
    }
    if(0){
      dialogHandle_16.SetOutput(data_header_length, "\n", data_length);
      dialogHandle_16.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    return (return_value);
  }

  function ReadFirstOD( variable gen5_file_name, sequence & plate_seq, variable wavelength ) variable {
    private dialog customDialog_19;
    private dialog customDialog_20;
    private dialog customDialog_21;
    private variable data_header_length;
    private variable return_value;
    private variable err_str;
    private variable od_flt;
    private variable labware_id;
    private variable od_str;
    private variable wavelength_str;
    private variable data_length;
    private variable data_header_str;
    private variable data_str;
    private variable loopCounter1;
    private variable string_find;
    private variable loopCounter2;
    private variable od_prop_str;
    private variable reading_header;
    private variable read_line;
    private variable well;
    private file file1;
    private variable data_header_arr[];
    private variable data_arr[];
    private dialog dialogHandle_22;
    MECC::TraceComment(Translate("------------------------------------------------------------------\nLMSF_Utilities.ReadFirstOD\n------------------------------------------------------------------"));
    return_value = 0;
    file1.AddField(1, read_line, hslString);
    file1.SetDelimiter(hslAsciiText);
    if( 0 == file1.Open(gen5_file_name, hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, gen5_file_name, "HxMetEdCompCmd");
    }
    reading_header = 1;
    {
      loopCounter1 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (reading_header == 1)
        {
          string_find = StrFind(read_line, "Wavelengths:");
          if (string_find >= 0)
          {
            return_value = 1;
            wavelength_str = StrIStr(wavelength);
            string_find = StrFind(read_line, wavelength_str);
            if (string_find < 0)
            {
              err_str = "Data for the requested weavelength, ";
              err_str = err_str + wavelength_str;
              err_str = err_str + ", is not saved in the Gen5 output file.";
              customDialog_19.InitCustomDialog("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");
              customDialog_19.SetCustomDialogProperty( "textBlock.Text", err_str );
              customDialog_19.ShowCustomDialog();
              return_value = 0;
              break;
            }
            reading_header = 2;
          }
        }
        else
        {
          if (reading_header == 2)
          {
            if (read_line == wavelength_str)
            {
              if( 0 == file1.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              if( 0 == file1.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              data_header_str = read_line;
              if( 0 == file1.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              data_str = read_line;
              reading_header = 0;
            }
          }
          else
          {
            if (reading_header == 0)
            {
            }
          }
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    if (reading_header == 1)
    {
      customDialog_20.InitCustomDialog("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");
      customDialog_20.ShowCustomDialog();
    }
    else
    {
      data_header_arr = HSLExtensions::String::Split(data_header_str, ",", 0);
      data_arr = HSLExtensions::String::Split(data_str, ",", 0);
      data_header_length=data_header_arr.GetSize();
      data_length=data_arr.GetSize();
      if (data_length == data_header_length)
      {
        od_prop_str = "OD_zero";
        SeqSetPropertyRange(plate_seq, 1, 96, od_prop_str, 0);
        SeqResetSequenceIndexes(plate_seq);
        labware_id = SeqGetLabwareId(plate_seq);
        {
          loopCounter2 = 0;
          while (loopCounter2 < data_length)
          {
            loopCounter2 = loopCounter2 + 1;
            well=data_header_arr.GetAt(loopCounter2-1);
            od_str=data_arr.GetAt(loopCounter2-1);
            od_flt = StrFVal(od_str);
            if(0){
              dialogHandle_22.SetOutput(loopCounter2, "\n", od_str, "\n", od_flt, "\n");
              dialogHandle_22.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            }
            SeqSetPropertyByWell(labware_id, well, plate_seq, od_prop_str, od_flt);
          }
        }
      }
      else
      {
        return_value = 0;
        customDialog_21.InitCustomDialog("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");
        customDialog_21.ShowCustomDialog();
      }
    }
    return (return_value);
  }

  function GetTraceFile(  ) variable {
    private variable run_id;
    private variable method_file_name;
    private variable tracefile_path;
    private variable tracefile_name;
    run_id = Util::GetUniqueRunId();
    method_file_name = TrcGetMethodFileName();
    tracefile_path = FilGetLogFilesPath();
    tracefile_name = HSLExtensions::File::GetFileNameWithoutExtension(method_file_name);
    tracefile_name = tracefile_name + "_";
    tracefile_name = tracefile_name + run_id;
    tracefile_name = tracefile_name + "_Trace.trc";
    tracefile_path = HSLExtensions::File::CreateFullFileName(tracefile_path, tracefile_name);
    return (tracefile_path);
  }

  function SortMetaList( variable & key_array[], variable & value_array[], variable & long_array[] ) void {
    private variable counter_plus_1;
    private variable key_length;
    private variable loopCounter2;
    private variable key_1;
    private variable loopCounter3;
    private variable key_2;
    private variable value_1;
    private variable value_2;
    private variable key_loop_length;
    private variable switched;
    private variable long_1;
    private variable long_2;
    MECC::TraceComment(Translate("====================================\nBegin SortArray sub-method\n===================================="));
    switched = 1;
    key_length=key_array.GetSize();
    key_loop_length = key_length - 1;
    {
      loopCounter2 = 0;
      while (switched == 1)
      {
        loopCounter2 = loopCounter2 + 1;
        switched = 0;
        {
          for(loopCounter3 = 0; loopCounter3 < key_loop_length;)
          {
            loopCounter3 = loopCounter3 + 1;
            value_1=value_array.GetAt(loopCounter3-1);
            counter_plus_1 = loopCounter3 + 1;
            value_2=value_array.GetAt(counter_plus_1-1);
            if (value_2 > value_1)
            {
              switched = 1;
              key_1=key_array.GetAt(loopCounter3-1);
              key_2=key_array.GetAt(counter_plus_1-1);
              long_1=long_array.GetAt(loopCounter3-1);
              long_2=long_array.GetAt(counter_plus_1-1);
              key_array.SetAt(counter_plus_1-1, key_1);
              key_array.SetAt(loopCounter3-1, key_2);
              value_array.SetAt(counter_plus_1-1, value_1);
              value_array.SetAt(loopCounter3-1, value_2);
              long_array.SetAt(counter_plus_1-1, long_1);
              long_array.SetAt(loopCounter3-1, long_2);
            }
          }
        }
      }
    }
    MECC::TraceComment(Translate("====================================\nEnd SortArray sub-method\n===================================="));
  }

  function SaveToMetaDataFile( variable meta_file_path, variable experiment_id, variable step_str, variable auto_method, variable auto_trace, variable worklist_file_path, variable year_string, variable month_string, variable day_string, variable start_time_str, variable append_str ) void {
    private variable end_position;
    private variable meta_string;
    private variable read_string;
    private variable loopCounter3;
    private file file2;
    private variable trace_file_name;
    private variable method_file_name;
    private variable end_time_str;
    private variable meta_file_exists;
    meta_file_exists = HSLExtensions::File::Exists(meta_file_path);
    if (meta_file_exists == 1)
    {
      file2.AddField(1, read_string, hslString);
      file2.SetDelimiter(hslAsciiText);
      if( 0 == file2.Open(meta_file_path, hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, meta_file_path, "HxMetEdCompCmd");
      }
      read_string = "";
      meta_string = "";
      {
        loopCounter3 = 0;
        while (
           (file2.Eof() == 0)
        )
        {
          loopCounter3 = loopCounter3 + 1;
          if( 0 == file2.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          meta_string = meta_string + read_string;
          meta_string = meta_string + "\n";
        }
      }
      if( 0 != file2.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      file2.RemoveFields();
      end_position = StrReverseFind(meta_string, "</metadata>");
      meta_string = StrLeft(meta_string, end_position);
    }
    else
    {
      meta_string = "";
      meta_string = meta_string + "<metadata source='NIST LMSF, Hamilton Venus'>\n";
      meta_string = meta_string + "\n";
    }
    if (experiment_id != "")
    {
      meta_string = meta_string + "  <experiment_id>\n    ";
      meta_string = meta_string + experiment_id;
      meta_string = meta_string + "\n  </experiment_id>\n";
      meta_string = meta_string + "\n";
    }
    if (auto_method == 1)
    {
      meta_string = meta_string + "  <method_file step='";
      meta_string = meta_string + step_str;
      meta_string = meta_string + "'>\n    ";
      method_file_name = TrcGetMethodFileName();
      meta_string = meta_string + method_file_name;
      meta_string = meta_string + "\n  </method_file>\n";
      meta_string = meta_string + "\n";
    }
    if (auto_trace == 1)
    {
      meta_string = meta_string + "  <trace_file step='";
      meta_string = meta_string + step_str;
      meta_string = meta_string + "'>\n    ";
      trace_file_name = GetTraceFile();
      meta_string = meta_string + trace_file_name;
      meta_string = meta_string + "\n  </trace_file>\n";
      meta_string = meta_string + "\n";
    }
    if (worklist_file_path != "")
    {
      meta_string = meta_string + "  <worklist_file step='";
      meta_string = meta_string + step_str;
      meta_string = meta_string + "'>\n    ";
      meta_string = meta_string + worklist_file_path;
      meta_string = meta_string + "\n  </worklist_file>\n";
      meta_string = meta_string + "\n";
    }
    if (year_string != "")
    {
      end_time_str = TimGetFormattedTime("%H:%M");
      meta_string = meta_string + "  <date_time step='";
      meta_string = meta_string + step_str;
      meta_string = meta_string + "'>\n";
      meta_string = meta_string + "    <year>";
      meta_string = meta_string + year_string;
      meta_string = meta_string + "</year>\n";
      meta_string = meta_string + "    <month>";
      meta_string = meta_string + month_string;
      meta_string = meta_string + "</month>\n";
      meta_string = meta_string + "    <day>";
      meta_string = meta_string + day_string;
      meta_string = meta_string + "</day>\n";
      meta_string = meta_string + "    <time status='method started'>";
      meta_string = meta_string + start_time_str;
      meta_string = meta_string + "</time>\n";
      meta_string = meta_string + "    <time status='method finished'>";
      meta_string = meta_string + end_time_str;
      meta_string = meta_string + "</time>\n";
      meta_string = meta_string + "  </date_time>\n";
      meta_string = meta_string + "\n";
    }
    if (append_str != "")
    {
      meta_string = meta_string + append_str;
      meta_string = meta_string + "\n";
    }
    meta_string = meta_string + "</metadata>\n";
    file2.AddField(1, meta_string, hslString);
    file2.SetDelimiter(hslAsciiText);
    if( 0 == file2.Open(meta_file_path, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, meta_file_path, "HxMetEdCompCmd");
    }
    if( 0 == file2.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != file2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file2.RemoveFields();
  }

  function GetOverlordFolderPath(  ) variable {
    SharedParameters();
    return (overlord_folder_path);
  }

  function SeqCopyPropsFromShortSeq( sequence & input_sequence, variable & property_arr[], sequence & target_sequence ) void {
    private variable start_input_position;
    private variable property_value;
    private variable position_id;
    private variable labware_id;
    private variable arr_size;
    private variable property_str;
    private variable loopCounter1;
    private variable loopCounter2;
    private variable start_target_position;
    private variable output_position;
    private variable input_position;
    start_input_position = input_sequence.GetCurrentPosition();
    start_target_position = target_sequence.GetCurrentPosition();
    arr_size=property_arr.GetSize();
    {
      loopCounter2 = 0;
      input_sequence.SetCurrentPosition(1);
      while (
         (input_sequence.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, input_sequence, 1);
        loopCounter2 = loopCounter2 + 1;
        input_position = input_sequence.GetCurrentPosition();
        labware_id = SeqGetLabwareId(input_sequence);
        position_id = SeqGetPositionId(input_sequence);
        output_position = SeqLookupPosition(target_sequence, labware_id, position_id, 1, 1);
        {
          for(loopCounter1 = 0; loopCounter1 < arr_size;)
          {
            loopCounter1 = loopCounter1 + 1;
            property_str=property_arr.GetAt(loopCounter1-1);
            if (output_position > 0)
            {
              property_value = SeqGetProperty(input_sequence, input_position, property_str);
              SeqSetProperty(target_sequence, output_position, property_str, property_value);
            }
            else
            {
            }
          }
        }
        SeqIncrement(input_sequence, 1);
        if (
           (input_sequence.GetCurrentPosition() > 0 && input_sequence.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      input_sequence.SetMax(input_sequence.GetTotal());
    }
    target_sequence.SetCurrentPosition(start_target_position);
    input_sequence.SetCurrentPosition(start_input_position);
  }

  function SeqZShift( sequence input_sequence, variable z_shift, device & ML_STAR ) void {
    private variable labware_arr[];
    private variable ret_val;
    private variable arr_length;
    private variable loopCounter1;
    labware_arr.SetSize(0);
    ret_val = SeqGetLabwareIds(input_sequence, labware_arr);
    if (ret_val != 0)
    {
      arr_length=labware_arr.GetSize();
      {
        for(loopCounter1 = 0; loopCounter1 < arr_length;)
        {
          loopCounter1 = loopCounter1 + 1;
          TrcTrace4("Shifting ", labware_arr.ElementAt( loopCounter1 -1), Translate(" in z-direction by "), z_shift);
          HSLLabwrAccess::RelativePositionValuesSetForLabwareID(ML_STAR, labware_arr.ElementAt( loopCounter1 -1), 0, 0, z_shift, 0);
        }
      }
    }
  }

  function GetTipTypeAndDispenseModeOfLiquidClass( variable i_strLiquidClassName, variable & o_intTiptype, variable & o_intDispenseMode ) void {
    o_intTiptype = 0;
    o_intDispenseMode = 0;
    MLSTAR_LIQUIDCLASSLib::Initialize(MLSTAR_LIQUIDCLASSLib::HSL_TRUE);
    MLSTAR_LIQUIDCLASSLib::SelectLiquidClass(i_strLiquidClassName);
    o_intTiptype = MLSTAR_LIQUIDCLASSLib::GetLiquidClassParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS::TipType);
    o_intDispenseMode = MLSTAR_LIQUIDCLASSLib::GetLiquidClassParameter(MLSTAR_LIQUIDCLASSLib::LIQUIDCLASS_PARAMS::DispenseMode);
    Trace ("Liquid class name :  ", i_strLiquidClassName, ", Tiptype = ", o_intTiptype, ", DispenseMode = ", o_intDispenseMode);
  }
} // library namespace
