 namespace _Method { #include "HSLMPELib.hsl" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
#include "Mock DNA extraction.res"
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
 namespace _Method { #include "HSLInhecoTEC\\HSLInhecoTECLib.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "DPXSmartHelper\\TipLength\\DPXPreCuttedTipsLib.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "Common\\MPE_Library.hs_" }
variable MPE2COMPort;
variable EPlateH;
variable MPE2Waste;
variable _blnSimulationMode;
variable sequence_number;
variable culture_volume;
variable is_pipetting;
variable is_debugging;
variable use_iSWAP;
variable FPonRPFilterHeight;
variable FPonRPNozzleHeight;
variable BPNozzleOffset;
variable BPFilterHeight;
variable BPNozzleHeight;
variable BPLenghtofNozzles;
variable askFor_ShakeParams;
global device ML_STAR ("Mock DNA extraction.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    DPXPRECUTTEDTIPSLIB::_InitLibrary();
    MPE_LIBRARY::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("*********************************************************************************************************************\nThis method is for DNA extraction using Agilent Filter and Nunc Binding Plates with E coli culture\n\nIt runs after the \"Combine old GP wells into Spin Plate.med\" method\nand after the Overlord \"Get DWP from STAR then Centrifuge DWP.ovp\"\n\nAt the start of this method, the labware needs to be in the following positions:\nSpin Plate with lid, Handoff Position\nOld Growth Plate with lid, Old_Growth_Plate_parking\n\n*********************************************************************************************************************"));
    _blnSimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    TrcTrace("_blnSimulationMode: ", _blnSimulationMode);
    GetParams();
    StartUp();
    if(0){
      PipetteMove01();
      PipetteMove01A();
      PipetteMove02();
      PipetteMove03();
    }
    PipetteMove04();
    PipetteMove05();
    PipetteMove06();
    PipetteMove07();
    PipetteMove08();
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    DPXPRECUTTEDTIPSLIB::_ExitLibrary();
    MPE_LIBRARY::_ExitLibrary();
  } }
