private function CleanUp(  ) void ;
private function GetParams(  ) void ;
private function PipetteMove01(  ) void ;
private function PipetteMove01A(  ) void ;
private function PipetteMove02(  ) void ;
private function PipetteMove03(  ) void ;
private function PipetteMove04(  ) void ;
private function PipetteMove05(  ) void ;
private function PipetteMove06(  ) void ;
private function PipetteMove07(  ) void ;
private function PipetteMove08(  ) void ;
private function Request_MPE2_Params( variable & UserControlPts ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  MECC::TraceComment(Translate("************************************************\nRunning OnAbort()\n************************************************"));
  CleanUp();
}

private function GetParams(  ) void {
  private variable param_dict;
  private variable loc;
  private variable loopCounter2;
  private variable read_line;
  private file file1;
  private variable split_line[];
  private variable culture_volume_str;
  private variable DNA_plate_number;
  private variable plate_num_str;
  private variable key_exists;
  MECC::TraceComment(Translate("************************************************\nRunning GetParams()\n************************************************"));
  MPE2COMPort = 7;
  TrcTrace(Translate("MPE2COMPort = "), MPE2COMPort);
  FPonRPNozzleHeight = 86.5;
  FPonRPFilterHeight = 86.5;
  BPNozzleHeight = 38.4;
  BPFilterHeight = 31.35;
  BPLenghtofNozzles = 6.6;
  BPNozzleOffset = 0;
  EPlateH = 14.35;
  MPE2Waste = 0;
  param_dict = Translate("param_dict");
  HSLExtensions::Dictionary::CreateDictionary(param_dict, 2);
  file1.AddField(1, read_line, hslString);
  file1.SetDelimiter(hslAsciiText);
  if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    while (
       (file1.Eof() == 0)
    )
    {
      loopCounter2 = loopCounter2 + 1;
      if( 0 == file1.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      loc = StrFind(read_line, ",");
      if (loc > 0)
      {
        split_line = HSLExtensions::String::Split(read_line, Translate(","), 1);
        HSLExtensions::Dictionary::AddItem(param_dict, split_line.ElementAt( 1 -1), split_line.ElementAt( 2 -1));
      }
    }
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  key_exists = HSLExtensions::Dictionary::ExistsItem(param_dict, "DNAPlateNumber");
  if (key_exists == 1)
  {
    plate_num_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("DNAPlateNumber"));
    DNA_plate_number = StrIVal(plate_num_str);
    sequence_number = DNA_plate_number % 4;
    if (sequence_number == 0)
    {
      sequence_number = 4;
    }
  }
  else
  {
    sequence_number = 1;
  }
  key_exists = HSLExtensions::Dictionary::ExistsItem(param_dict, "cultureVolume");
  if (key_exists == 1)
  {
    culture_volume_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("cultureVolume"));
    culture_volume = StrFVal(culture_volume_str);
  }
  else
  {
    culture_volume = 500;
  }
  if (culture_volume > 500)
  {
    culture_volume = 500;
  }
  else
  {
    if (culture_volume < 200)
    {
      culture_volume = 200;
    }
  }
  key_exists = HSLExtensions::Dictionary::ExistsItem(param_dict, "isPipetting");
  if (key_exists == 1)
  {
    is_pipetting = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isPipetting"));
  }
  else
  {
    is_pipetting = "true";
  }
  key_exists = HSLExtensions::Dictionary::ExistsItem(param_dict, "isDebugging");
  if (key_exists == 1)
  {
    is_debugging = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isDebugging"));
  }
  else
  {
    is_debugging = "true";
  }
  is_debugging = "true";
  askFor_ShakeParams = "false";
  use_iSWAP = "false";
  MECC::TraceComment(Translate("************************************\nEnd Definitions\n************************************"));
}

private function StartUp(  ) void {
  private variable SimMode;
  private variable MPE_loopCounter;
  private dialog dialogHandle_1;
  private dialog dialogHandle_2;
  private dialog dialogHandle_3;
  MECC::TraceComment(Translate("************************************************\nRunning StartUp()\n************************************************"));
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR);
  if (_blnSimulationMode == 1)
  {
    SimMode = 1;
    TrcTrace(Translate("SiimMod = "), SimMode);
  }
  else
  {
    SimMode = 0;
    TrcTrace(Translate("SiimMod = "), SimMode);
    blnMPEReturn = 1;
    {
      MPE_loopCounter = 0;
      while (blnMPEReturn == 1)
      {
        MPE_loopCounter = MPE_loopCounter + 1;
        blnMPEReturn = HSLMPELib::ConnectUsingCOM(MPE2COMPort, 921600, _blnSimulationMode, MPE2DevID);
        if (blnMPEReturn == 1)
        {
          dialogHandle_1.SetInputSize(1);
          dialogHandle_1.SetInputField(0, Translate("COM port number:"), hslInteger, MPE2COMPort, 1, 255);
          dialogHandle_1.ShowInput(Translate("MPE: verify MPE COM port."), hslInfinite, hslOKOnly | hslDefButton1);
          MPE2COMPort = dialogHandle_1.GetInputField(0);
          dialogHandle_2.SetInputSize(1);
          dialogHandle_2.SetInputField(0, Translate("return value:"), hslInteger, blnMPEReturn, 0, 1);
          dialogHandle_2.ShowInput(Translate("MPE: check trace, fix any problems with MPE, then click 'OK' to retry; or set return value to 0 to continue."), hslInfinite, hslOKOnly | hslDefButton1);
          blnMPEReturn = dialogHandle_2.GetInputField(0);
        }
      }
    }
    blnMPEVacuumCheck = 1;
    blnMPEReturn = 1;
    {
      MPE_loopCounter = 0;
      while (blnMPEReturn == 1)
      {
        MPE_loopCounter = MPE_loopCounter + 1;
        blnMPEReturn = HSLMPELib::Initialize(MPE2DevID);
        if (blnMPEReturn == 1)
        {
          dialogHandle_3.SetInputSize(1);
          dialogHandle_3.SetInputField(0, Translate("return value:"), hslInteger, blnMPEReturn, 0, 1);
          dialogHandle_3.ShowInput(Translate("MPE: check trace, fix any problems with MPE, then click 'OK' to retry; or set return value to 0 to continue."), hslInfinite, hslOKOnly | hslDefButton1);
          blnMPEReturn = dialogHandle_3.GetInputField(0);
        }
      }
    }
  }
}

private function CleanUp(  ) void {
  MECC::TraceComment(Translate("************************************************\nRunning CleanUp()\n************************************************"));
  HSLMPELib::Disconnect(MPE2DevID);
}

private function PipetteMove01(  ) void {
  private dialog dialogHandle_4;
  MECC::TraceComment(Translate("************************************************\nRunning PipetteMove01(): remove supernatant\n************************************************"));
  if (is_debugging == "true")
  {
    dialogHandle_4.SetOutput(Translate("PipetteMove01(): Remove supernatant from cell pellets"));
    dialogHandle_4.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
}

private function PipetteMove02(  ) void {
  private dialog dialogHandle_5;
  MECC::TraceComment(Translate("************************************************\nRunning PipetteMove02(): add buffer P2, shake to mix\n************************************************"));
  if (is_debugging == "true")
  {
    dialogHandle_5.SetOutput(Translate("PipetteMove02(): Add buffer P2, shake to mix"));
    dialogHandle_5.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
}

private function PipetteMove05(  ) void {
  private dialog customDialog_6;
  private variable MPE_loopCounter;
  private dialog dialogHandle_7;
  private dialog dialogHandle_8;
  MECC::TraceComment(Translate("************************************************\nRunning PipetteMove05(): Pipette cleared lystate from receving plate to BP; process BP to waste\n************************************************"));
  if (is_debugging == "true")
  {
    dialogHandle_8.SetOutput(Translate("PipetteMove05(): Move Binding Plate to MPE, transfer lysate from Receiving Plate to Binding Plate, process Binding Plate to waste"));
    dialogHandle_8.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  if (use_iSWAP == "true")
  {
  }
  else
  {
    customDialog_6.InitCustomDialog("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");
    customDialog_6.ShowCustomDialog();
  }
  if (_blnSimulationMode == 1)
  {
    MECC::TraceComment(Translate("---------------------------------------------------------------------------------------------------------\nSimulation Mode: Venus is pretending to tell the MPE to push the solution through the Binding Plate\n---------------------------------------------------------------------------------------------------------"));
  }
  else
  {
    HSLMPELib::FilterPlatePlaced(MPE2DevID, BPFilterHeight, BPNozzleHeight);
    blnMPEReturn = 1;
    {
      MPE_loopCounter = 0;
      while (blnMPEReturn == 1)
      {
        MPE_loopCounter = MPE_loopCounter + 1;
        blnMPEReturn = HSLMPELib::ProcessFilterToWasteContainer(MPE2DevID, Translate("pressure,40,60;"), 1, MPE2Waste, blnMPEVacuumCheck);
        if (blnMPEReturn == 1)
        {
          dialogHandle_7.SetInputSize(1);
          dialogHandle_7.SetInputField(0, Translate("return value:"), hslInteger, blnMPEReturn, 0, 1);
          dialogHandle_7.ShowInput(Translate("MPE: check trace, fix any problems with MPE, then click 'OK' to retry; or set return value to 0 to continue."), hslInfinite, hslOKOnly | hslDefButton1);
          blnMPEReturn = dialogHandle_7.GetInputField(0);
        }
      }
    }
  }
}

private function PipetteMove06(  ) void {
  private variable MPE_loopCounter;
  private dialog dialogHandle_9;
  private dialog dialogHandle_10;
  MECC::TraceComment(Translate("************************************************\nRunning PipetteMove06(): wash BP with Buffer PB\n************************************************"));
  if (is_debugging == "true")
  {
    dialogHandle_10.SetOutput(Translate("PipetteMove06(): Wash Binding Plate with Buffer PB"));
    dialogHandle_10.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  if (_blnSimulationMode == 1)
  {
    MECC::TraceComment(Translate("---------------------------------------------------------------------------------------------------------\nSimulation Mode: Venus is pretending to tell the MPE2 to push the fluid through the Binding Plate to waste\n---------------------------------------------------------------------------------------------------------"));
  }
  else
  {
    HSLMPELib::FilterPlatePlaced(MPE2DevID, BPFilterHeight, BPNozzleHeight);
    blnMPEReturn = 1;
    {
      MPE_loopCounter = 0;
      while (blnMPEReturn == 1)
      {
        MPE_loopCounter = MPE_loopCounter + 1;
        blnMPEReturn = HSLMPELib::ProcessFilterToWasteContainer(MPE2DevID, Translate("pressure,40,60;"), 1, MPE2Waste, blnMPEVacuumCheck);
        if (blnMPEReturn == 1)
        {
          dialogHandle_9.SetInputSize(1);
          dialogHandle_9.SetInputField(0, Translate("return value:"), hslInteger, blnMPEReturn, 0, 1);
          dialogHandle_9.ShowInput(Translate("MPE: check trace, fix any problems with MPE, then click 'OK' to retry; or set return value to 0 to continue."), hslInfinite, hslOKOnly | hslDefButton1);
          blnMPEReturn = dialogHandle_9.GetInputField(0);
        }
      }
    }
  }
}

private function PipetteMove07(  ) void {
  private variable loopCounter2;
  private dialog dialogHandle_11;
  MECC::TraceComment(Translate("************************************************\nRunning PipetteMove07(): wash BP with Buffer PE, dry BP\n************************************************"));
  if (is_debugging == "true")
  {
    dialogHandle_11.SetOutput(Translate("PipetteMove07(): Wash Binding Plate with Buffer PE, dry Binding Plate"));
    dialogHandle_11.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  if (_blnSimulationMode == 1)
  {
    MECC::TraceComment(Translate("---------------------------------------------------------------------------------------------------------\nSimulation Mode: Venus is pretending to tell the MPE2 to push the fluid through the Binding Plate to waste\n---------------------------------------------------------------------------------------------------------"));
  }
  else
  {
    HSLMPELib::FilterPlatePlaced(MPE2DevID, BPFilterHeight, BPNozzleHeight);
    blnMPEReturn = HSLMPELib::ProcessFilterToWasteContainer(MPE2DevID, Translate("pressure,40,60;pressure,65,420;"), 1, MPE2Waste, blnMPEVacuumCheck);
    if (blnMPEReturn == 1)
    {
      {
        loopCounter2 = 0;
        while (blnMPEReturn == 1)
        {
          loopCounter2 = loopCounter2 + 1;
          Request_MPE2_Params(ControlPts);
          blnMPEReturn = HSLMPELib::ProcessFilterToWasteContainer(MPE2DevID, ControlPts, 1, MPE2Waste, blnMPEVacuumCheck);
        }
      }
    }
  }
}

private function PipetteMove03(  ) void {
  private dialog dialogHandle_12;
  MECC::TraceComment(Translate("************************************************\nRunning PipetteMove03(): add Buffer N3, shake to mix\n************************************************"));
  if (is_debugging == "true")
  {
    dialogHandle_12.SetOutput(Translate("PipetteMove03(): Add Buffer N3, shake to mix"));
    dialogHandle_12.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
}

private function PipetteMove01A(  ) void {
  private dialog dialogHandle_13;
  MECC::TraceComment(Translate("************************************************\nRunning PipetteMove01A(): resuspend pellet with Buffer P1, transfer to LP\n************************************************"));
  if (is_debugging == "true")
  {
    dialogHandle_13.SetOutput(Translate("PipetteMove01A(): Resuspend pellet with Buffer P1, transfer to Lysate Plate"));
    dialogHandle_13.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
}

private function PipetteMove08(  ) void {
  private timer timer_Elution;
  private variable loopCounter2;
  private dialog customDialog_14;
  private dialog customDialog_15;
  private dialog customDialog_16;
  private variable MPE_loopCounter;
  private dialog dialogHandle_17;
  private dialog dialogHandle_18;
  private dialog dialogHandle_19;
  private dialog dialogHandle_20;
  private dialog dialogHandle_21;
  private dialog dialogHandle_22;
  MECC::TraceComment(Translate("************************************************\nRunning PipetteMove08(): Add Elute Buffer/water to BP, process BP to EP\n************************************************"));
  if (is_debugging == "true")
  {
    dialogHandle_21.SetOutput(Translate("PipetteMove08(): Move Binding Plate to pipetting position, add elution buffer (water) to Binding Plate; process Binding Plate to Elution Plate"));
    dialogHandle_21.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  MECC::TraceComment(Translate("*************************************************************************************************************\nElute the contents of the binding plate into an (Eppendorf lo-bind) elution plate \n*************************************************************************************************************"));
  customDialog_14.InitCustomDialog("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");
  customDialog_14.ShowCustomDialog();
  if (_blnSimulationMode == 1)
  {
    MECC::TraceComment(Translate("---------------------------------------------------------------------------------------------------------\nSimulation Mode: Venus is pretending to tell the MPE2 to clamp the binding plate\n---------------------------------------------------------------------------------------------------------"));
  }
  else
  {
    HSLMPELib::FilterPlatePlaced(MPE2DevID, BPFilterHeight, BPNozzleHeight);
    blnMPEReturn = 1;
    {
      MPE_loopCounter = 0;
      while (blnMPEReturn == 1)
      {
        MPE_loopCounter = MPE_loopCounter + 1;
        blnMPEReturn = HSLMPELib::ClampFilterPlate(MPE2DevID);
        if (blnMPEReturn == 1)
        {
          dialogHandle_18.SetInputSize(1);
          dialogHandle_18.SetInputField(0, Translate("return value:"), hslInteger, blnMPEReturn, 0, 1);
          dialogHandle_18.ShowInput(Translate("MPE: check trace, fix any problems with MPE, then click 'OK' to retry; or set return value to 0 to continue."), hslInfinite, hslOKOnly | hslDefButton1);
          blnMPEReturn = dialogHandle_18.GetInputField(0);
        }
      }
    }
  }
  customDialog_15.InitCustomDialog("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");
  customDialog_15.ShowCustomDialog();
  if( 0 == timer_Elution.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if (_blnSimulationMode == 1)
  {
    MECC::TraceComment(Translate("---------------------------------------------------------------------------------------------------------\nSimulation Mode: Venus is pretending to push elution buffer through the binding plate\n---------------------------------------------------------------------------------------------------------"));
  }
  else
  {
    blnMPEReturn = 1;
    {
      MPE_loopCounter = 0;
      while (blnMPEReturn == 1)
      {
        MPE_loopCounter = MPE_loopCounter + 1;
        blnMPEReturn = HSLMPELib::CollectionPlatePlaced(MPE2DevID, EPlateH, BPNozzleOffset);
        if (blnMPEReturn == 1)
        {
          dialogHandle_19.SetInputSize(1);
          dialogHandle_19.SetInputField(0, Translate("return value:"), hslInteger, blnMPEReturn, 0, 1);
          dialogHandle_19.ShowInput(Translate("MPE: check trace, fix any problems with MPE, then click 'OK' to retry; or set return value to 0 to continue."), hslInfinite, hslOKOnly | hslDefButton1);
          blnMPEReturn = dialogHandle_19.GetInputField(0);
        }
      }
    }
    blnMPEReturn = HSLMPELib::ProcessFilterToCollectionPlate(MPE2DevID, Translate("pressure,65,420;"), 0);
    if (blnMPEReturn == 1)
    {
      {
        loopCounter2 = 0;
        while (blnMPEReturn == 1)
        {
          loopCounter2 = loopCounter2 + 1;
          Request_MPE2_Params(ControlPts);
          blnMPEReturn = HSLMPELib::ProcessFilterToCollectionPlate(MPE2DevID, ControlPts, 0);
        }
      }
    }
  }
  dialogHandle_17.SetOutput(Translate("Remove elution plate from MPE2, add lid, and take to NGS-STAR for library prep."));
  dialogHandle_17.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  if (_blnSimulationMode == 1)
  {
  }
  else
  {
    HSLMPELib::CollectionPlateRemoved(MPE2DevID);
    blnMPEReturn = 1;
    {
      MPE_loopCounter = 0;
      while (blnMPEReturn == 1)
      {
        MPE_loopCounter = MPE_loopCounter + 1;
        blnMPEReturn = HSLMPELib::RetrieveFilterPlate(MPE2DevID);
        if (blnMPEReturn == 1)
        {
          dialogHandle_20.SetInputSize(1);
          dialogHandle_20.SetInputField(0, Translate("return value:"), hslInteger, blnMPEReturn, 0, 1);
          dialogHandle_20.ShowInput(Translate("MPE: check trace, fix any problems with MPE, then click 'OK' to retry; or set return value to 0 to continue."), hslInfinite, hslOKOnly | hslDefButton1);
          blnMPEReturn = dialogHandle_20.GetInputField(0);
        }
      }
    }
  }
  if (use_iSWAP == "true")
  {
  }
  else
  {
    dialogHandle_22.SetOutput(Translate("Move Binding plate from MPE2  to storage location (on top of support plate)."), "\n", Translate("Move Receiving Plate to storage location (under Filter Plate)."), "\n");
    dialogHandle_22.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  if (_blnSimulationMode == 1)
  {
  }
  else
  {
    HSLMPELib::FilterPlateRemoved(MPE2DevID);
  }
  customDialog_16.InitCustomDialog("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");
  customDialog_16.ShowCustomDialog();
}

private function Request_MPE2_Params( variable & UserControlPts ) void {
  private variable PressureStr;
  private variable Pressure;
  private variable TimeStr;
  private variable Time;
  private dialog dialogHandle_23;
  UserControlPts = 0;
  MECC::TraceComment(Translate("************************************\nStart user input submethod\n************************************"));
  dialogHandle_23.SetInputSize(2);
  dialogHandle_23.SetInputField(0, Translate("Enter pressure (psi): "), hslInteger, 65, 0, 100);
  dialogHandle_23.SetInputField(1, Translate("Enter duration (s): "), hslInteger, 420, 0, 1000000);
  dialogHandle_23.ShowInput(Translate("Enter [MPE]2 parameters"), hslInfinite, hslOKOnly | hslDefButton1);
  Pressure = dialogHandle_23.GetInputField(0);
  Time = dialogHandle_23.GetInputField(1);
  MECC::TraceComment(Translate("Convert entered integer variables for Pressure and Time to strings"));
  PressureStr = StrIStr(Pressure);
  TimeStr = StrIStr(Time);
  MECC::TraceComment(Translate("Assign \"UserControlPts\" string for [MPE]2 processing step: type (pressure), value (PressureStr), duration (TimeStr)"));
  UserControlPts = Translate("pressure,");
  UserControlPts = UserControlPts + PressureStr;
  UserControlPts = UserControlPts + Translate(",");
  UserControlPts = UserControlPts + TimeStr;
  MECC::TraceComment(Translate("************************************\nEnd user input submethod\n************************************"));
}

private function PipetteMove04(  ) void {
  private dialog customDialog_24;
  private dialog dialogHandle_25;
  private variable MPE_loopCounter;
  private dialog dialogHandle_26;
  private dialog dialogHandle_27;
  private dialog dialogHandle_28;
  MECC::TraceComment(Translate("************************************************\nRunning PipetteMove04(): Load FP, process FP to RP\n************************************************"));
  if (is_debugging == "true")
  {
    dialogHandle_27.SetOutput(Translate("PipetteMove04(): Move Filter Plate and Receiving Plate to MPE, transfer lysate to Filter Plate, push lysate through to Receiving Plate"));
    dialogHandle_27.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  if (use_iSWAP == "true")
  {
  }
  else
  {
    customDialog_24.InitCustomDialog("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");
    customDialog_24.ShowCustomDialog();
  }
  if (_blnSimulationMode == 1)
  {
    MECC::TraceComment(Translate("---------------------------------------------------------------------------------------------------------\nSimulation Mode: Venus is pretending to make the MPE2 clamp the Filter Plate in place\n---------------------------------------------------------------------------------------------------------"));
  }
  else
  {
    HSLMPELib::FilterPlatePlaced(MPE2DevID, FPonRPFilterHeight, FPonRPNozzleHeight);
  }
  if (_blnSimulationMode == 1)
  {
    MECC::TraceComment(Translate("---------------------------------------------------------------------------------------------------------\nSimulation Mode: Venus is pretending to make the MPE2 push fluid through the Filter Plate\n---------------------------------------------------------------------------------------------------------"));
  }
  else
  {
    blnMPEReturn = 1;
    {
      MPE_loopCounter = 0;
      while (blnMPEReturn == 1)
      {
        MPE_loopCounter = MPE_loopCounter + 1;
        blnMPEReturn = HSLMPELib::ProcessFilterToWasteContainer(MPE2DevID, Translate("pressure,20,180;pressure,65,30;"), 1, MPE2Waste, blnMPEVacuumCheck);
        if (blnMPEReturn == 1)
        {
          dialogHandle_26.SetInputSize(1);
          dialogHandle_26.SetInputField(0, Translate("return value:"), hslInteger, blnMPEReturn, 0, 1);
          dialogHandle_26.ShowInput(Translate("MPE: check trace, fix any problems with MPE, then click 'OK' to retry; or set return value to 0 to continue."), hslInfinite, hslOKOnly | hslDefButton1);
          blnMPEReturn = dialogHandle_26.GetInputField(0);
        }
      }
    }
  }
  if (use_iSWAP == "true")
  {
  }
  else
  {
    dialogHandle_25.SetOutput(Translate("Return Filter Plate to storage location."));
    dialogHandle_25.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    dialogHandle_28.SetOutput(Translate("Move Receiving Plate to Handoff position on STAR deck."));
    dialogHandle_28.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    if (_blnSimulationMode == 1)
    {
      MECC::TraceComment(Translate("---------------------------------------------------------------------------------------------------------\nSimulation Mode: Venus is pretending to make the MPE2 let go of the Filter Plate\n---------------------------------------------------------------------------------------------------------"));
    }
    else
    {
      HSLMPELib::FilterPlateRemoved(MPE2DevID);
    }
  }
}
