private function CleanUp(  ) void ;
private function GetParams(  ) void ;
private function PipetteMove01(  ) void ;
private function PipetteMove01A(  ) void ;
private function PipetteMove02(  ) void ;
private function PipetteMove03(  ) void ;
private function PipetteMove04(  ) void ;
private function PipetteMove05(  ) void ;
private function PipetteMove06(  ) void ;
private function PipetteMove07(  ) void ;
private function PipetteMove08(  ) void ;
private function Request_MPE2_Params( variable & UserControlPts ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  MECC::TraceComment(Translate("************************************************\nRunning OnAbort()\n************************************************"));
  CleanUp();
}

private function GetParams(  ) void {
  private variable param_dict;
  private variable loc;
  private variable loopCounter2;
  private variable read_line;
  private file file1;
  private variable split_line[];
  private variable culture_volume_str;
  private variable DNA_plate_number;
  private variable plate_num_str;
  private variable key_exists;
  MECC::TraceComment(Translate("************************************************\nRunning GetParams()\n************************************************"));
  MPE2COMPort = 7;
  TrcTrace(Translate("MPE2COMPort = "), MPE2COMPort);
  FPonRPNozzleHeight = 86.5;
  FPonRPFilterHeight = 86.5;
  BPNozzleHeight = 38.4;
  BPFilterHeight = 31.35;
  BPLenghtofNozzles = 6.6;
  BPNozzleOffset = 0;
  EPlateH = 14.35;
  MPE2Waste = 0;
  param_dict = Translate("param_dict");
  HSLExtensions::Dictionary::CreateDictionary(param_dict, 2);
  file1.AddField(1, read_line, hslString);
  file1.SetDelimiter(hslAsciiText);
  if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    while (
       (file1.Eof() == 0)
    )
    {
      loopCounter2 = loopCounter2 + 1;
      if( 0 == file1.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      loc = StrFind(read_line, ",");
      if (loc > 0)
      {
        split_line = HSLExtensions::String::Split(read_line, Translate(","), 1);
        HSLExtensions::Dictionary::AddItem(param_dict, split_line.ElementAt( 1 -1), split_line.ElementAt( 2 -1));
      }
    }
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  key_exists = HSLExtensions::Dictionary::ExistsItem(param_dict, "DNAPlateNumber");
  if (key_exists == 1)
  {
    plate_num_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("DNAPlateNumber"));
    DNA_plate_number = StrIVal(plate_num_str);
    sequence_number = DNA_plate_number % 4;
    if (sequence_number == 0)
    {
      sequence_number = 4;
    }
  }
  else
  {
    sequence_number = 1;
  }
  key_exists = HSLExtensions::Dictionary::ExistsItem(param_dict, "cultureVolume");
  if (key_exists == 1)
  {
    culture_volume_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("cultureVolume"));
    culture_volume = StrFVal(culture_volume_str);
  }
  else
  {
    culture_volume = 500;
  }
  if (culture_volume > 500)
  {
    culture_volume = 500;
  }
  else
  {
    if (culture_volume < 200)
    {
      culture_volume = 200;
    }
  }
  key_exists = HSLExtensions::Dictionary::ExistsItem(param_dict, "isPipetting");
  if (key_exists == 1)
  {
    is_pipetting = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isPipetting"));
  }
  else
  {
    is_pipetting = "true";
  }
  key_exists = HSLExtensions::Dictionary::ExistsItem(param_dict, "isDebugging");
  if (key_exists == 1)
  {
    is_debugging = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isDebugging"));
  }
  else
  {
    is_debugging = "true";
  }
  is_debugging = "true";
  askFor_ShakeParams = "false";
  use_iSWAP = "false";
  MECC::TraceComment(Translate("************************************\nEnd Definitions\n************************************"));
}

private function StartUp(  ) void {
  private variable SimMode;
  MECC::TraceComment(Translate("************************************************\nRunning StartUp()\n************************************************"));
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  if(0){
    COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR, ML_STAR.clear_96_head_seq);
  }
  if (_blnSimulationMode == 1)
  {
    SimMode = 1;
    TrcTrace(Translate("SiimMod = "), SimMode);
  }
  else
  {
    SimMode = 0;
    TrcTrace(Translate("SiimMod = "), SimMode);
    MPE_LIBRARY::InitializeMPELibrary(_blnSimulationMode);
    MPE_LIBRARY::Connect(0);
    MPE_LIBRARY::Initialize(0);
  }
}

private function CleanUp(  ) void {
  MECC::TraceComment(Translate("************************************************\nRunning CleanUp()\n************************************************"));
  MPE_LIBRARY::Disconnect(0);
}

private function PipetteMove01(  ) void {
  private dialog dialogHandle_1;
  MECC::TraceComment(Translate("************************************************\nRunning PipetteMove01(): remove supernatant\n************************************************"));
  if (is_debugging == "true")
  {
    dialogHandle_1.SetOutput(Translate("PipetteMove01(): Remove supernatant from cell pellets"));
    dialogHandle_1.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
}

private function PipetteMove02(  ) void {
  private dialog dialogHandle_2;
  MECC::TraceComment(Translate("************************************************\nRunning PipetteMove02(): add buffer P2, shake to mix\n************************************************"));
  if (is_debugging == "true")
  {
    dialogHandle_2.SetOutput(Translate("PipetteMove02(): Add buffer P2, shake to mix"));
    dialogHandle_2.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
}

private function PipetteMove05(  ) void {
  private dialog customDialog_3;
  private dialog dialogHandle_4;
  MECC::TraceComment(Translate("************************************************\nRunning PipetteMove05(): Pipette cleared lystate from receving plate to BP; process BP to waste\n************************************************"));
  if (is_debugging == "true")
  {
    dialogHandle_4.SetOutput(Translate("PipetteMove05(): Move Binding Plate to MPE, transfer lysate from Receiving Plate to Binding Plate, process Binding Plate to waste"));
    dialogHandle_4.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  if (use_iSWAP == "true")
  {
  }
  else
  {
    customDialog_3.InitCustomDialog("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");
    customDialog_3.ShowCustomDialog();
  }
  if (_blnSimulationMode == 1)
  {
    MECC::TraceComment(Translate("---------------------------------------------------------------------------------------------------------\nSimulation Mode: Venus is pretending to tell the MPE to push the solution through the Binding Plate\n---------------------------------------------------------------------------------------------------------"));
  }
  else
  {
    MPE_LIBRARY::FilterPlateToWaste(0, BPFilterHeight, BPNozzleHeight, Translate("pressure,40,60;"));
  }
}

private function PipetteMove06(  ) void {
  private dialog dialogHandle_5;
  MECC::TraceComment(Translate("************************************************\nRunning PipetteMove06(): wash BP with Buffer PB\n************************************************"));
  if (is_debugging == "true")
  {
    dialogHandle_5.SetOutput(Translate("PipetteMove06(): Wash Binding Plate with Buffer PB"));
    dialogHandle_5.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  if (_blnSimulationMode == 1)
  {
    MECC::TraceComment(Translate("---------------------------------------------------------------------------------------------------------\nSimulation Mode: Venus is pretending to tell the MPE2 to push the fluid through the Binding Plate to waste\n---------------------------------------------------------------------------------------------------------"));
  }
  else
  {
    MPE_LIBRARY::FilterPlateToWaste(0, BPFilterHeight, BPNozzleHeight, Translate("pressure,40,60;"));
  }
}

private function PipetteMove07(  ) void {
  private dialog dialogHandle_6;
  MECC::TraceComment(Translate("************************************************\nRunning PipetteMove07(): wash BP with Buffer PE, dry BP\n************************************************"));
  if (is_debugging == "true")
  {
    dialogHandle_6.SetOutput(Translate("PipetteMove07(): Wash Binding Plate with Buffer PE, dry Binding Plate"));
    dialogHandle_6.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  if (_blnSimulationMode == 1)
  {
    MECC::TraceComment(Translate("---------------------------------------------------------------------------------------------------------\nSimulation Mode: Venus is pretending to tell the MPE2 to push the fluid through the Binding Plate to waste\n---------------------------------------------------------------------------------------------------------"));
  }
  else
  {
    MPE_LIBRARY::FilterPlateToWaste(0, BPFilterHeight, BPNozzleHeight, Translate("pressure,40,60;pressure,65,420;"));
  }
}

private function PipetteMove03(  ) void {
  private dialog dialogHandle_7;
  MECC::TraceComment(Translate("************************************************\nRunning PipetteMove03(): add Buffer N3, shake to mix\n************************************************"));
  if (is_debugging == "true")
  {
    dialogHandle_7.SetOutput(Translate("PipetteMove03(): Add Buffer N3, shake to mix"));
    dialogHandle_7.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
}

private function PipetteMove01A(  ) void {
  private dialog dialogHandle_8;
  MECC::TraceComment(Translate("************************************************\nRunning PipetteMove01A(): resuspend pellet with Buffer P1, transfer to LP\n************************************************"));
  if (is_debugging == "true")
  {
    dialogHandle_8.SetOutput(Translate("PipetteMove01A(): Resuspend pellet with Buffer P1, transfer to Lysate Plate"));
    dialogHandle_8.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
}

private function PipetteMove08(  ) void {
  private dialog customDialog_9;
  private dialog customDialog_10;
  private dialog customDialog_11;
  private dialog dialogHandle_12;
  private dialog dialogHandle_13;
  private dialog dialogHandle_14;
  MECC::TraceComment(Translate("************************************************\nRunning PipetteMove08(): Add Elute Buffer/water to BP, process BP to EP\n************************************************"));
  if (is_debugging == "true")
  {
    dialogHandle_13.SetOutput(Translate("PipetteMove08(): Move Binding Plate to pipetting position, add elution buffer (water) to Binding Plate; process Binding Plate to Elution Plate"));
    dialogHandle_13.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  MECC::TraceComment(Translate("*************************************************************************************************************\nElute the contents of the binding plate into an (Eppendorf lo-bind) elution plate \n*************************************************************************************************************"));
  customDialog_9.InitCustomDialog("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");
  customDialog_9.ShowCustomDialog();
  if (_blnSimulationMode == 1)
  {
    MECC::TraceComment(Translate("---------------------------------------------------------------------------------------------------------\nSimulation Mode: Venus is pretending to tell the MPE2 to clamp the binding plate\n---------------------------------------------------------------------------------------------------------"));
  }
  else
  {
    MPE_LIBRARY::SetFilterHeight(BPFilterHeight);
    MPE_LIBRARY::SetNozzleHeight(BPNozzleHeight);
    MPE_LIBRARY::FilterPlatePlaced(0);
    MPE_LIBRARY::ClampFilterPlate(0);
  }
  customDialog_10.InitCustomDialog("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");
  customDialog_10.ShowCustomDialog();
  if (_blnSimulationMode == 1)
  {
    MECC::TraceComment(Translate("---------------------------------------------------------------------------------------------------------\nSimulation Mode: Venus is pretending to push elution buffer through the binding plate\n---------------------------------------------------------------------------------------------------------"));
  }
  else
  {
    MPE_LIBRARY::SetCollectionPlateHeight(EPlateH);
    MPE_LIBRARY::SetOffsetFromNozzles(BPNozzleOffset);
    MPE_LIBRARY::CollectionPlatePlaced(0);
    MPE_LIBRARY::SetControlPoints(Translate("pressure,65,420;"));
    MPE_LIBRARY::ProcessFilterToCollectionPlate(0, 0);
  }
  dialogHandle_12.SetOutput(Translate("Remove elution plate from MPE2, add lid, and take to NGS-STAR for library prep."));
  dialogHandle_12.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  if (_blnSimulationMode == 1)
  {
  }
  else
  {
    MPE_LIBRARY::CollectionPlateRemoved(0);
    MPE_LIBRARY::RetrieveFilterPlate(0);
  }
  if (use_iSWAP == "true")
  {
  }
  else
  {
    dialogHandle_14.SetOutput(Translate("Move Binding plate from MPE2  to storage location (on top of support plate)."), "\n", Translate("Move Receiving Plate to storage location (under Filter Plate)."), "\n");
    dialogHandle_14.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  if (_blnSimulationMode == 1)
  {
  }
  else
  {
    MPE_LIBRARY::FilterPlateRemoved(0);
  }
  customDialog_11.InitCustomDialog("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");
  customDialog_11.ShowCustomDialog();
}

private function Request_MPE2_Params( variable & UserControlPts ) void {
  private variable PressureStr;
  private variable Pressure;
  private variable TimeStr;
  private variable Time;
  private dialog dialogHandle_15;
  UserControlPts = 0;
  MECC::TraceComment(Translate("************************************\nStart user input submethod\n************************************"));
  dialogHandle_15.SetInputSize(2);
  dialogHandle_15.SetInputField(0, Translate("Enter pressure (psi): "), hslInteger, 65, 0, 100);
  dialogHandle_15.SetInputField(1, Translate("Enter duration (s): "), hslInteger, 420, 0, 1000000);
  dialogHandle_15.ShowInput(Translate("Enter [MPE]2 parameters"), hslInfinite, hslOKOnly | hslDefButton1);
  Pressure = dialogHandle_15.GetInputField(0);
  Time = dialogHandle_15.GetInputField(1);
  MECC::TraceComment(Translate("Convert entered integer variables for Pressure and Time to strings"));
  PressureStr = StrIStr(Pressure);
  TimeStr = StrIStr(Time);
  MECC::TraceComment(Translate("Assign \"UserControlPts\" string for [MPE]2 processing step: type (pressure), value (PressureStr), duration (TimeStr)"));
  UserControlPts = Translate("pressure,");
  UserControlPts = UserControlPts + PressureStr;
  UserControlPts = UserControlPts + Translate(",");
  UserControlPts = UserControlPts + TimeStr;
  MECC::TraceComment(Translate("************************************\nEnd user input submethod\n************************************"));
}

private function PipetteMove04(  ) void {
  private dialog customDialog_16;
  private dialog dialogHandle_17;
  private dialog dialogHandle_18;
  private dialog dialogHandle_19;
  MECC::TraceComment(Translate("************************************************\nRunning PipetteMove04(): Load FP, process FP to RP\n************************************************"));
  if (is_debugging == "true")
  {
    dialogHandle_18.SetOutput(Translate("PipetteMove04(): Move Filter Plate and Receiving Plate to MPE, transfer lysate to Filter Plate, push lysate through to Receiving Plate"));
    dialogHandle_18.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  if (use_iSWAP == "true")
  {
  }
  else
  {
    customDialog_16.InitCustomDialog("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");
    customDialog_16.ShowCustomDialog();
  }
  if (_blnSimulationMode == 1)
  {
    MECC::TraceComment(Translate("---------------------------------------------------------------------------------------------------------\nSimulation Mode: Venus is pretending to make the MPE2 push fluid through the Filter Plate\n---------------------------------------------------------------------------------------------------------"));
  }
  else
  {
    MPE_LIBRARY::FilterPlateToWaste(0, FPonRPFilterHeight, FPonRPNozzleHeight, Translate("pressure,20,180;pressure,65,30;"));
  }
  if (use_iSWAP == "true")
  {
  }
  else
  {
    dialogHandle_17.SetOutput(Translate("Return Filter Plate to storage location."));
    dialogHandle_17.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    dialogHandle_19.SetOutput(Translate("Move Receiving Plate to Handoff position on STAR deck."));
    dialogHandle_19.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
}
