#pragma once
#include "HSLMPELib.hsl"
#include "HSLTrcLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace MPE_LIBRARY {
  variable comPort;
  variable MPE2DevID;
  variable baudRate;
  variable blnMPEVacuumCheck;
  variable filterHeight;
  variable nozzleHeight;
  variable offsetFromNozzles;
  variable collectionPlateHeight;
  variable controlPoints;
  variable wasteContainerID;
  variable _blnSimulationMode;
  function ClampFilterPlate( variable useAutoErrorRecovery ) variable ;
  function CollectionPlatePlaced( variable useAutoErrorRecovery ) variable ;
  function CollectionPlateRemoved( variable useAutoErrorRecovery ) variable ;
  function Connect( variable useAutoErrorRecovery ) variable ;
  function Disconnect( variable useAutoErrorRecovery ) variable ;
  function FilterPlatePlaced( variable useAutoErrorRecovery ) variable ;
  function FilterPlateRemoved( variable useAutoErrorRecovery ) variable ;
  function FilterPlateToWaste( variable useAutoErrorRecovery, variable f_height, variable n_height, variable contr_pnts ) variable ;
  private function HandleError( variable errorTitle ) variable ;
  function Initialize( variable useAutoErrorRecovery ) variable ;
  function InitializeMPELibrary( variable blnSimMode ) void ;
  function ManualMPEErrorRecovery(  ) void ;
  function ProcessFilterToCollectionPlate( variable useAutoErrorRecovery, variable returnPlateToIntegrationArea ) variable ;
  function ProcessFilterToWaste( variable useAutoErrorRecovery, variable returnPlateToIntegrationArea ) variable ;
  function RetrieveFilterPlate( variable useAutoErrorRecovery ) variable ;
  function SetCollectionPlateHeight( variable inputVar ) void ;
  function SetCommPort( variable inputVar ) void ;
  function SetControlPoints( variable inputVar ) void ;
  function SetFilterHeight( variable inputVar ) void ;
  function SetNozzleHeight( variable inputVar ) void ;
  function SetOffsetFromNozzles( variable inputVar ) void ;
  function SetVacuumCheck( variable inputVar ) void ;
  function SetWasteContainerID( variable inputVar ) void ;
  function UserSelectControlPoints(  ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function ManualMPEErrorRecovery(  ) void {
    private variable loopCounter1;
    private dialog customDialog_1;
    private variable isFinished;
    private variable userChoice;
    private variable errorMessage;
    private dialog dialogHandle_2;
    private variable returnPlate;
    private dialog dialogHandle_3;
    private dialog dialogHandle3;
    private variable blnMPEReturn;
    private dialog dialogHandle_4;
    private dialog dialogHandle_5;
    private dialog dialogHandle_6;
    userChoice = 0;
    {
      loopCounter1 = 0;
      while (isFinished != 1)
      {
        loopCounter1 = loopCounter1 + 1;
        customDialog_1.InitCustomDialog("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");
        customDialog_1.ShowCustomDialog();
        userChoice = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
        if (userChoice == 1)
        {
          blnMPEReturn = 0;
          isFinished = 1;
        }
        if (userChoice == 10)
        {
          InitializeMPELibrary(_blnSimulationMode);
          blnMPEReturn = 0;
        }
        if (userChoice == 11)
        {
          blnMPEReturn = HSLMPELib::ConnectUsingCOM(comPort, baudRate, _blnSimulationMode, MPE2DevID, 0);
        }
        if (userChoice == 12)
        {
          blnMPEReturn = HSLMPELib::Disconnect(MPE2DevID);
        }
        if (userChoice == 13)
        {
          blnMPEReturn = HSLMPELib::Initialize(MPE2DevID);
        }
        if (userChoice == 14)
        {
          dialogHandle3.SetInputSize(1);
          dialogHandle3.SetInputField(0, Translate("blnMPEVacuumCheck: "), hslInteger, blnMPEVacuumCheck, 0, 1);
          dialogHandle3.ShowInput("", hslInfinite, hslOKOnly | hslDefButton1);
          blnMPEVacuumCheck = dialogHandle3.GetInputField(0);
        }
        if (userChoice == 15)
        {
          dialogHandle_4.SetInputSize(2);
          dialogHandle_4.SetInputField(0, Translate("nozzleHeight: "), hslFloat, nozzleHeight, 0, 1000);
          dialogHandle_4.SetInputField(1, Translate("filterHeight: "), hslFloat, filterHeight, 0, 1000);
          dialogHandle_4.ShowInput("", hslInfinite, hslOKOnly | hslDefButton1);
          nozzleHeight = dialogHandle_4.GetInputField(0);
          filterHeight = dialogHandle_4.GetInputField(1);
          blnMPEReturn = HSLMPELib::FilterPlatePlaced(MPE2DevID, filterHeight, nozzleHeight);
        }
        if (userChoice == 16)
        {
          UserSelectControlPoints();
          dialogHandle_5.SetInputSize(1);
          dialogHandle_5.SetInputField(0, Translate("return plate?"), hslInteger, 1, 0, 1);
          dialogHandle_5.ShowInput("", hslInfinite, hslOKOnly | hslDefButton1);
          returnPlate = dialogHandle_5.GetInputField(0);
          blnMPEReturn = HSLMPELib::ProcessFilterToWasteContainer(MPE2DevID, controlPoints, returnPlate, wasteContainerID, blnMPEVacuumCheck);
        }
        if (userChoice == 17)
        {
          blnMPEReturn = HSLMPELib::ClampFilterPlate(MPE2DevID);
        }
        if (userChoice == 18)
        {
          dialogHandle_6.SetInputSize(2);
          dialogHandle_6.SetInputField(0, Translate("collectionPlateHeight: "), hslFloat, collectionPlateHeight, 0, 1000);
          dialogHandle_6.SetInputField(1, Translate("offsetFromNozzles: "), hslFloat, offsetFromNozzles, 0, 1000);
          dialogHandle_6.ShowInput("", hslInfinite, hslOKOnly | hslDefButton1);
          collectionPlateHeight = dialogHandle_6.GetInputField(0);
          offsetFromNozzles = dialogHandle_6.GetInputField(1);
          blnMPEReturn = HSLMPELib::CollectionPlatePlaced(MPE2DevID, collectionPlateHeight, offsetFromNozzles);
        }
        if (userChoice == 19)
        {
          UserSelectControlPoints();
          dialogHandle_3.SetInputSize(1);
          dialogHandle_3.SetInputField(0, Translate("return plate?"), hslInteger, 1, 0, 1);
          dialogHandle_3.ShowInput("", hslInfinite, hslOKOnly | hslDefButton1);
          returnPlate = dialogHandle_3.GetInputField(0);
          blnMPEReturn = HSLMPELib::ProcessFilterToCollectionPlate(MPE2DevID, controlPoints, returnPlate);
        }
        if (userChoice == 20)
        {
          blnMPEReturn = HSLMPELib::RetrieveFilterPlate(MPE2DevID);
        }
        if (userChoice == 21)
        {
          blnMPEReturn = HSLMPELib::FilterPlateRemoved(MPE2DevID);
        }
        if (userChoice == 22)
        {
          blnMPEReturn = HSLMPELib::CollectionPlateRemoved(MPE2DevID);
        }
        if (blnMPEReturn != 0)
        {
          HSLMPELib::GetLastError(MPE2DevID, 1, errorMessage);
          dialogHandle_2.SetOutput(errorMessage);
          dialogHandle_2.ShowOutput(Translate("MPE Error"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        }
      }
    }
  }

  function InitializeMPELibrary( variable blnSimMode ) void {
    comPort = 14;
    baudRate = 921600;
    blnMPEVacuumCheck = 1;
    controlPoints = "-";
    wasteContainerID = 0;
    _blnSimulationMode = blnSimMode;
  }

  function Connect( variable useAutoErrorRecovery ) variable {
    private variable blnMPEReturn;
    private variable loopCounter2;
    private variable userChoice;
    private variable errorTitle;
    private variable testVars;
    private dialog dialogHandle_7;
    testVars = comPort * baudRate;
    if (testVars == 0)
    {
      dialogHandle_7.SetInputSize(2);
      dialogHandle_7.SetInputField(0, Translate("comPort: "), hslInteger, comPort, 1, 1000);
      dialogHandle_7.SetInputField(1, Translate("baudRate: "), hslInteger, baudRate, 1, 1000000);
      dialogHandle_7.ShowInput("", hslInfinite, hslOKOnly | hslDefButton1);
      comPort = dialogHandle_7.GetInputField(0);
      baudRate = dialogHandle_7.GetInputField(1);
    }
    blnMPEReturn = 1;
    {
      loopCounter2 = 0;
      while (blnMPEReturn != 0)
      {
        loopCounter2 = loopCounter2 + 1;
        blnMPEReturn = HSLMPELib::ConnectUsingCOM(comPort, baudRate, _blnSimulationMode, MPE2DevID, 0);
        errorTitle = Translate("Error on Connect()");
        if (blnMPEReturn != 0)
        {
          if (useAutoErrorRecovery > 0)
          {
          }
          else
          {
            userChoice = HandleError(errorTitle);
            if (userChoice == 5)
            {
              break;
            }
          }
        }
      }
    }
    return (blnMPEReturn);
  }

  function FilterPlatePlaced( variable useAutoErrorRecovery ) variable {
    private variable errorTitle;
    private variable blnMPEReturn;
    private variable userChoice;
    private variable loopCounter2;
    private variable testVars;
    private dialog dialogHandle_8;
    testVars = nozzleHeight * filterHeight;
    if (testVars == 0)
    {
      dialogHandle_8.SetInputSize(2);
      dialogHandle_8.SetInputField(0, Translate("nozzleHeight: "), hslFloat, nozzleHeight, 0, 1000);
      dialogHandle_8.SetInputField(1, Translate("filterHeight: "), hslFloat, filterHeight, 0, 1000);
      dialogHandle_8.ShowInput("", hslInfinite, hslOKOnly | hslDefButton1);
      nozzleHeight = dialogHandle_8.GetInputField(0);
      filterHeight = dialogHandle_8.GetInputField(1);
    }
    blnMPEReturn = 1;
    {
      loopCounter2 = 0;
      while (blnMPEReturn != 0)
      {
        loopCounter2 = loopCounter2 + 1;
        blnMPEReturn = HSLMPELib::FilterPlatePlaced(MPE2DevID, filterHeight, nozzleHeight);
        errorTitle = Translate("Error on FilterPlatePlaced()");
        if (blnMPEReturn != 0)
        {
          if (useAutoErrorRecovery > 0)
          {
          }
          else
          {
            userChoice = HandleError(errorTitle);
            if (userChoice == 5)
            {
              break;
            }
          }
        }
      }
    }
    return (blnMPEReturn);
  }

  private function HandleError( variable errorTitle ) variable {
    private variable errorMessage;
    private variable userChoice;
    private variable loopCounter1;
    private dialog customDialog_9;
    HSLMPELib::GetLastError(MPE2DevID, 0, errorMessage);
    TrcFormatTrace(Translate("MPE2"), Translate("Error Handling"), 3, errorTitle, errorMessage);
    userChoice = 7;
    {
      loopCounter1 = 0;
      while (userChoice == 7)
      {
        loopCounter1 = loopCounter1 + 1;
        customDialog_9.InitCustomDialog("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");
        customDialog_9.SetCustomDialogProperty( "Title", errorTitle );
        customDialog_9.SetCustomDialogProperty( "textBlock.Text", errorMessage );
        customDialog_9.ShowCustomDialog();
        userChoice = customDialog_9.GetCustomDialogProperty( "ReturnValue" );
        if (userChoice == 7)
        {
          ManualMPEErrorRecovery();
        }
      }
    }
    HSLMPELib::GetLastError(MPE2DevID, 1, errorMessage);
    return (userChoice);
  }

  function Disconnect( variable useAutoErrorRecovery ) variable {
    private variable errorTitle;
    private variable blnMPEReturn;
    private variable userChoice;
    private variable loopCounter2;
    blnMPEReturn = 1;
    {
      loopCounter2 = 0;
      while (blnMPEReturn != 0)
      {
        loopCounter2 = loopCounter2 + 1;
        blnMPEReturn = HSLMPELib::Disconnect(MPE2DevID);
        errorTitle = Translate("Error on Disconnect()");
        if (blnMPEReturn != 0)
        {
          if (useAutoErrorRecovery > 0)
          {
          }
          else
          {
            userChoice = HandleError(errorTitle);
            if (userChoice == 5)
            {
              break;
            }
          }
        }
      }
    }
    return (blnMPEReturn);
  }

  function Initialize( variable useAutoErrorRecovery ) variable {
    private variable errorTitle;
    private variable blnMPEReturn;
    private variable userChoice;
    private variable loopCounter2;
    blnMPEReturn = 1;
    {
      loopCounter2 = 0;
      while (blnMPEReturn != 0)
      {
        loopCounter2 = loopCounter2 + 1;
        blnMPEReturn = HSLMPELib::Initialize(MPE2DevID);
        errorTitle = Translate("Error on Initialize()");
        if (blnMPEReturn != 0)
        {
          if (useAutoErrorRecovery > 0)
          {
          }
          else
          {
            userChoice = HandleError(errorTitle);
            if (userChoice == 5)
            {
              break;
            }
          }
        }
      }
    }
    return (blnMPEReturn);
  }

  function CollectionPlatePlaced( variable useAutoErrorRecovery ) variable {
    private variable errorTitle;
    private variable blnMPEReturn;
    private variable userChoice;
    private variable loopCounter2;
    private variable testVars;
    private dialog dialogHandle_10;
    MECC::TraceComment(Translate("*** MPE_Library.CollectionPlatePlaced ***"));
    testVars = collectionPlateHeight * 1;
    if (testVars == 0)
    {
      dialogHandle_10.SetInputSize(2);
      dialogHandle_10.SetInputField(0, Translate("collectionPlateHeight: "), hslFloat, collectionPlateHeight, 0, 1000);
      dialogHandle_10.SetInputField(1, Translate("offsetFromNozzles: "), hslFloat, offsetFromNozzles, 0, 1000);
      dialogHandle_10.ShowInput("", hslInfinite, hslOKOnly | hslDefButton1);
      collectionPlateHeight = dialogHandle_10.GetInputField(0);
      offsetFromNozzles = dialogHandle_10.GetInputField(1);
    }
    blnMPEReturn = 1;
    {
      loopCounter2 = 0;
      while (blnMPEReturn != 0)
      {
        loopCounter2 = loopCounter2 + 1;
        blnMPEReturn = HSLMPELib::CollectionPlatePlaced(MPE2DevID, collectionPlateHeight, offsetFromNozzles);
        errorTitle = Translate("Error on CollectionPlatePlaced()");
        if (blnMPEReturn != 0)
        {
          if (useAutoErrorRecovery > 0)
          {
          }
          else
          {
            userChoice = HandleError(errorTitle);
            if (userChoice == 5)
            {
              break;
            }
          }
        }
      }
    }
    return (blnMPEReturn);
  }

  function SetNozzleHeight( variable inputVar ) void {
    nozzleHeight = inputVar;
  }

  function SetFilterHeight( variable inputVar ) void {
    filterHeight = inputVar;
  }

  function SetCollectionPlateHeight( variable inputVar ) void {
    collectionPlateHeight = inputVar;
  }

  function SetOffsetFromNozzles( variable inputVar ) void {
    offsetFromNozzles = inputVar;
  }

  function CollectionPlateRemoved( variable useAutoErrorRecovery ) variable {
    private variable errorTitle;
    private variable blnMPEReturn;
    private variable userChoice;
    private variable loopCounter2;
    blnMPEReturn = 1;
    {
      loopCounter2 = 0;
      while (blnMPEReturn != 0)
      {
        loopCounter2 = loopCounter2 + 1;
        blnMPEReturn = HSLMPELib::CollectionPlateRemoved(MPE2DevID);
        errorTitle = Translate("Error on CollectionPlateRemoved()");
        if (blnMPEReturn != 0)
        {
          if (useAutoErrorRecovery > 0)
          {
          }
          else
          {
            userChoice = HandleError(errorTitle);
            if (userChoice == 5)
            {
              break;
            }
          }
        }
      }
    }
    return (blnMPEReturn);
  }

  function FilterPlateRemoved( variable useAutoErrorRecovery ) variable {
    private variable errorTitle;
    private variable blnMPEReturn;
    private variable userChoice;
    private variable loopCounter2;
    blnMPEReturn = 1;
    {
      loopCounter2 = 0;
      while (blnMPEReturn != 0)
      {
        loopCounter2 = loopCounter2 + 1;
        blnMPEReturn = HSLMPELib::FilterPlateRemoved(MPE2DevID);
        errorTitle = Translate("Error on FilterPlateRemoved()");
        if (blnMPEReturn != 0)
        {
          if (useAutoErrorRecovery > 0)
          {
          }
          else
          {
            userChoice = HandleError(errorTitle);
            if (userChoice == 5)
            {
              break;
            }
          }
        }
      }
    }
    return (blnMPEReturn);
  }

  function SetCommPort( variable inputVar ) void {
    comPort = inputVar;
  }

  function SetVacuumCheck( variable inputVar ) void {
    blnMPEVacuumCheck = inputVar;
  }

  function RetrieveFilterPlate( variable useAutoErrorRecovery ) variable {
    private variable errorTitle;
    private variable blnMPEReturn;
    private variable userChoice;
    private variable loopCounter2;
    blnMPEReturn = 1;
    {
      loopCounter2 = 0;
      while (blnMPEReturn != 0)
      {
        loopCounter2 = loopCounter2 + 1;
        blnMPEReturn = HSLMPELib::RetrieveFilterPlate(MPE2DevID);
        errorTitle = Translate("Error on RetrieveFilterPlate()");
        if (blnMPEReturn != 0)
        {
          if (useAutoErrorRecovery > 0)
          {
          }
          else
          {
            userChoice = HandleError(errorTitle);
            if (userChoice == 5)
            {
              break;
            }
          }
        }
      }
    }
    return (blnMPEReturn);
  }

  function ProcessFilterToCollectionPlate( variable useAutoErrorRecovery, variable returnPlateToIntegrationArea ) variable {
    private variable errorTitle;
    private variable blnMPEReturn;
    private variable userChoice;
    private variable loopCounter2;
    if (controlPoints == "-")
    {
      UserSelectControlPoints();
    }
    blnMPEReturn = 1;
    {
      loopCounter2 = 0;
      while (blnMPEReturn != 0)
      {
        loopCounter2 = loopCounter2 + 1;
        blnMPEReturn = HSLMPELib::ProcessFilterToCollectionPlate(MPE2DevID, controlPoints, returnPlateToIntegrationArea);
        errorTitle = Translate("Error on ProcessFilterToColletionPlate()");
        if (blnMPEReturn != 0)
        {
          if (useAutoErrorRecovery > 0)
          {
          }
          else
          {
            userChoice = HandleError(errorTitle);
            if (userChoice == 5)
            {
              break;
            }
          }
        }
      }
    }
    return (blnMPEReturn);
  }

  function UserSelectControlPoints(  ) void {
    private dialog customDialog_11;
    customDialog_11.InitCustomDialog("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");
    customDialog_11.SetCustomDialogProperty( "textBox1.Text", controlPoints );
    customDialog_11.ShowCustomDialog();
    controlPoints = customDialog_11.GetCustomDialogProperty( "textBox1.Text" );
  }

  function ProcessFilterToWaste( variable useAutoErrorRecovery, variable returnPlateToIntegrationArea ) variable {
    private variable errorTitle;
    private variable blnMPEReturn;
    private variable userChoice;
    private variable loopCounter2;
    if (controlPoints == "-")
    {
      UserSelectControlPoints();
    }
    blnMPEReturn = 1;
    {
      loopCounter2 = 0;
      while (blnMPEReturn != 0)
      {
        loopCounter2 = loopCounter2 + 1;
        blnMPEReturn = HSLMPELib::ProcessFilterToWasteContainer(MPE2DevID, controlPoints, returnPlateToIntegrationArea, wasteContainerID, blnMPEVacuumCheck);
        errorTitle = Translate("Error on ProcessFilterToWasteContainer()");
        if (blnMPEReturn != 0)
        {
          if (useAutoErrorRecovery > 0)
          {
          }
          else
          {
            userChoice = HandleError(errorTitle);
            if (userChoice == 5)
            {
              break;
            }
          }
        }
      }
    }
    return (blnMPEReturn);
  }

  function SetWasteContainerID( variable inputVar ) void {
    wasteContainerID = inputVar;
  }

  function SetControlPoints( variable inputVar ) void {
    controlPoints = inputVar;
  }

  function ClampFilterPlate( variable useAutoErrorRecovery ) variable {
    private variable errorTitle;
    private variable blnMPEReturn;
    private variable userChoice;
    private variable loopCounter2;
    blnMPEReturn = 1;
    {
      loopCounter2 = 0;
      while (blnMPEReturn != 0)
      {
        loopCounter2 = loopCounter2 + 1;
        blnMPEReturn = HSLMPELib::ClampFilterPlate(MPE2DevID);
        errorTitle = Translate("Error on ClampFilterPlate()");
        if (blnMPEReturn != 0)
        {
          if (useAutoErrorRecovery > 0)
          {
          }
          else
          {
            userChoice = HandleError(errorTitle);
            if (userChoice == 5)
            {
              break;
            }
          }
        }
      }
    }
    return (blnMPEReturn);
  }

  function FilterPlateToWaste( variable useAutoErrorRecovery, variable f_height, variable n_height, variable contr_pnts ) variable {
    private variable blnMPEReturn;
    blnMPEReturn = 1;
    SetFilterHeight(f_height);
    SetNozzleHeight(n_height);
    blnMPEReturn = FilterPlatePlaced(useAutoErrorRecovery);
    SetControlPoints(contr_pnts);
    blnMPEReturn = ProcessFilterToWaste(useAutoErrorRecovery, 1);
    blnMPEReturn = FilterPlateRemoved(useAutoErrorRecovery);
    return (blnMPEReturn);
  }
} // library namespace
