#pragma once
#include "HSLSeqLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLErrLib.hsl"
#include "HSLExtensions\\Sequence.hsl"
#include "HSLLabwareStateLib.hsl"
#include "HSLML_STARLib.hsl"
#include "HSLExtensions\\String.hsl"
#include "HSLUtilLib.hsl"
#include "HSLUtilLib2.hsl"
#include "HSLMthLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace PIPETTINGWITHERRORHANDLING {
  function DistributeReagent( device & ML_STAR, sequence & tip_sequence, sequence & aspirate_seq, sequence & dispense_seq, variable pipette_volume, variable re_use_tips ) void ;
  function MediaToEmptyWells( device & ML_STAR, sequence & tip_sequence, sequence & media_source, sequence & media_destination, variable media_volume, variable dispence_height, variable get_new_tips ) void ;
  function TipEject( device & ML_STAR ) void ;
  function TipPickUp( device & ML_STAR, sequence & tip_sequence ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function MediaToEmptyWells( device & ML_STAR, sequence & tip_sequence, sequence & media_source, sequence & media_destination, variable media_volume, variable dispence_height, variable get_new_tips ) void {
    private variable tip_ID;
    private variable stringFind;
    private variable liquidClass;
    private variable loopCounter1;
    tip_ID = SeqGetLabwareId(tip_sequence);
    stringFind = StrFind(tip_ID, "1000");
    if (stringFind > -1)
    {
      liquidClass = "HighVolumeFilter_Water_DispenseSurface_Empty";
    }
    else
    {
      stringFind = StrFind(tip_ID, "300");
      if (stringFind > -1)
      {
        liquidClass = "StandardVolumeFilter_Water_DispenseSurface_Empty";
      }
      else
      {
        stringFind = StrFind(tip_ID, "50");
        if (stringFind > -1)
        {
          liquidClass = "Tip_50ulFilter_Water_DispenseSurface_Empty";
        }
        else
        {
          ErrRaise(42, Translate("bad tip sequence"));
        }
      }
    }
    if (get_new_tips == 1)
    {
      TipPickUp(ML_STAR, tip_sequence);
    }
    media_source.SetCurrentPosition(1);
    {
      loopCounter1 = 0;
      while (
         (media_destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, media_destination, 1, media_source, 1);
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (
           (media_destination.GetCurrentPosition() > 0 && media_destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      media_destination.SetMax(media_destination.GetTotal());
      media_source.SetMax(media_source.GetTotal());
      media_destination.SetCurrentPosition(1);
      media_source.SetCurrentPosition(1);
    }
    if (get_new_tips == 1)
    {
      TipEject(ML_STAR);
    }
  }

  function TipPickUp( device & ML_STAR, sequence & tip_sequence ) void {
    PTL::ResetTipHandlingState();
    PTL::SetTipHandlingState("UserResponseTime", 0);
    PTL::SetTipHandlingState("ErrorHandling", 3);
    PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
    PTL::SetTipHandlingState("TipCountingIdentifier", "");
    PTL::SetTipHandlingState("InitializeCustomStepID", 0);
    PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
    PTL::SetTipHandlingState("TipPickupChannelVariable", "");
    PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
    PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
    if( 0 == PTL::TipPickup(ML_STAR, tip_sequence) )
    {
          PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
  }

  function TipEject( device & ML_STAR ) void {
    PTL::ResetTipHandlingState();
    PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
    PTL::SetTipHandlingState("ErrorHandling", 3);
    PTL::SetTipHandlingState("InitializeCustomStepID", 0);
    PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
    PTL::SetTipHandlingState("TipEjectChannelVariable", "");
    if( 0 == PTL::TipEject(ML_STAR) )
    {
          PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
  }

  function DistributeReagent( device & ML_STAR, sequence & tip_sequence, sequence & aspirate_seq, sequence & dispense_seq, variable pipette_volume, variable re_use_tips ) void {
    private variable tip_ID;
    private variable stringFind;
    private variable liquidClass;
    private variable loopCounter1;
    private variable aspirate_seq_length;
    private variable dispense_seq_length;
    private variable seq_length_ratio;
    private dialog dialogHandle1;
    tip_ID = SeqGetLabwareId(tip_sequence);
    stringFind = StrFind(tip_ID, "1000");
    if (stringFind > -1)
    {
      liquidClass = "HighVolumeFilter_Water_DispenseSurface_Empty";
    }
    else
    {
      stringFind = StrFind(tip_ID, "300");
      if (stringFind > -1)
      {
        liquidClass = "StandardVolumeFilter_Water_DispenseSurface_Empty";
      }
      else
      {
        stringFind = StrFind(tip_ID, "50");
        if (stringFind > -1)
        {
          liquidClass = "Tip_50ulFilter_Water_DispenseSurface_Empty";
        }
        else
        {
          ErrRaise(42, Translate("bad tip sequence"));
        }
      }
    }
    if (re_use_tips == 1)
    {
      TipPickUp(ML_STAR, tip_sequence);
    }
    aspirate_seq_length = SeqGetTotal(aspirate_seq);
    dispense_seq_length = SeqGetTotal(dispense_seq);
    seq_length_ratio = 8 / (aspirate_seq_length * 1.0);
    seq_length_ratio = MthCeiling(seq_length_ratio);
    dialogHandle1.SetOutput(seq_length_ratio);
    dialogHandle1.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    aspirate_seq.SetCurrentPosition(1);
    {
      loopCounter1 = 0;
      while (
         (dispense_seq.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, aspirate_seq, seq_length_ratio, dispense_seq, 1);
        loopCounter1 = loopCounter1 + 1;
        if (re_use_tips != 1)
        {
          TipPickUp(ML_STAR, tip_sequence);
        }
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (
           (dispense_seq.GetCurrentPosition() > 0 && dispense_seq.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      aspirate_seq.SetMax(aspirate_seq.GetTotal());
      dispense_seq.SetMax(dispense_seq.GetTotal());
      aspirate_seq.SetCurrentPosition(1);
      dispense_seq.SetCurrentPosition(1);
    }
    if (re_use_tips == 1)
    {
      TipEject(ML_STAR);
    }
  }
} // library namespace
