#pragma once
#include "HSLExtensions\\Core.hsl"
#include "HSLMthLib.hsl"
#include "HSLTimLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLTrcLib.hsl"
#include "LMSF_Utilities.hs_"
#include "HSLSeqLib.hsl"
#include "HSLLabwrAccess\\HSLLabwrAccess.hsl"
#include "HSLExtensions\\Sequence.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace PLATEANDLIDMOVEMENT {
  variable front_channel;
  private function CheckFrontChannel(  ) void ;
  private function GetNewFrontChannel(  ) void ;
  function MoveAbegeneFromThermoShakeNoTap( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void ;
  function MoveAbgenePlateFromThermoShake( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void ;
  function MoveAbgenePlateWithLid( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void ;
  function MoveAgarPlateFromThermoShake( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void ;
  function MoveAgarPlateWithLid( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void ;
  function MoveAgilent86mLSingleResWithLid( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void ;
  function MoveAgilentFPwithLid( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR, variable z_shift ) void ;
  function MoveBindPlateNoLid( sequence move_from_seq, sequence move_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR, variable z_shift ) void ;
  function MoveBindPlateWithLid( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void ;
  function MoveCytometryPlateWithLid( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void ;
  function MoveEppendorf350uLElutionPlateWithLid( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void ;
  function MoveEppendorf500uLElutePlateWithLid( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void ;
  function MoveEppendorfDWPNoLidNoTap( sequence move_from_seq, sequence move_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void ;
  function MoveEppendorfDWPWithLid( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void ;
  function MoveGreinerPlateWithLid( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void ;
  function MoveGrowthPlateFromThermoShake( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void ;
  function MoveGrowthPlateWithLid( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void ;
  function MoveGrowthPlateWithLidNoTap( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void ;
  function MoveLid( sequence lid_from_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void ;
  function MoveLidNoTap( sequence lid_from_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void ;
  function MoveN3BufferWithLid( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void ;
  function MoveNuncOmniTrayWithLid( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void ;
  private function MovePlateNoLidNoTap( sequence move_from_seq, sequence move_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR, variable grip_height, variable grip_width, variable grip_force, variable z_shift ) void ;
  private function MovePlateWithLidAndTap( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR, variable grip_height, variable grip_width, variable grip_force, variable z_shift ) void ;
  function MoveSupportPlateNoLid( sequence move_from_seq, sequence move_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void ;
  function MoveSupportPlateNoLidNoTap( sequence move_from_seq, sequence move_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void ;
  function SetFrontChannel( variable i_front ) void ;
  private function TraceGripper( sequence gripper_sequence, device & STAR ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    LMSF_UTILITIES::_InitLibrary();
  }
  function _ExitLibrary() {
    LMSF_UTILITIES::_ExitLibrary();
  }

  function MoveGrowthPlateWithLid( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void {
    private variable grip_height;
    private variable grip_width;
    private variable grip_force;
    private variable z_shift;
    if (new_front_gripper == 1)
    {
      GetNewFrontChannel();
    }
    else
    {
      CheckFrontChannel();
    }
    grip_height = 11;
    grip_width = 80;
    grip_force = 5;
    z_shift = 1;
    MovePlateWithLidAndTap(move_from_seq, lid_from_seq, move_to_seq, lid_to_seq, gripper_sequence, new_front_gripper, eject_gripper, STAR, grip_height, grip_width, grip_force, z_shift);
  }

  function MoveLid( sequence lid_from_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void {
    private variable x_acceleration;
    private variable grip_opening;
    private variable plate_press;
    private variable z_speed;
    private variable grip_width;
    private variable grip_speed;
    private variable grip_force;
    private variable grip_height;
    private variable check_lid_on_get;
    private variable check_lid_on_put;
    if (new_front_gripper == 1)
    {
      GetNewFrontChannel();
    }
    else
    {
      CheckFrontChannel();
    }
    grip_height = 4;
    grip_width = 84.5;
    grip_opening = 88;
    grip_force = 5;
    z_speed = 75;
    grip_speed = 277;
    check_lid_on_get = 0;
    check_lid_on_put = 1;
    x_acceleration = 2;
    plate_press = 0.5;
    STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    if (eject_gripper == 1)
    {
      TraceGripper(gripper_sequence, STAR);
    }
    STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  }

  private function GetNewFrontChannel(  ) void {
    private variable front_channel_rand;
    private variable time_str;
    private variable rnd_seed;
    front_channel = 7;
    time_str = TimGetFormattedTime(Translate("%S"));
    rnd_seed = StrIVal(time_str);
    front_channel_rand = rnd_seed / (59.01 * 1.0);
    front_channel_rand = front_channel_rand * 7;
    front_channel_rand = front_channel_rand + 2;
    front_channel = MthFloor(front_channel_rand);
    TrcTrace(Translate("New front channel for CORE grippers: "), front_channel);
  }

  private function CheckFrontChannel(  ) void {
    private variable is_integer;
    is_integer = HSLExtensions::Core::IsInteger(front_channel);
    if (is_integer == 1)
    {
      if (front_channel < 2)
      {
        GetNewFrontChannel();
      }
      else
      {
        if (front_channel > 8)
        {
          GetNewFrontChannel();
        }
      }
    }
    else
    {
      GetNewFrontChannel();
    }
  }

  function MoveLidNoTap( sequence lid_from_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void {
    private variable x_acceleration;
    private variable check_lid_on_put;
    private variable grip_opening;
    private variable plate_press;
    private variable z_speed;
    private variable check_lid_on_get;
    private variable grip_width;
    private variable grip_speed;
    private variable grip_force;
    private variable grip_height;
    if (new_front_gripper == 1)
    {
      GetNewFrontChannel();
    }
    else
    {
      CheckFrontChannel();
    }
    grip_height = 4;
    grip_width = 84.5;
    grip_opening = 88;
    grip_force = 5;
    z_speed = 75;
    grip_speed = 277;
    check_lid_on_get = 0;
    check_lid_on_put = 0;
    x_acceleration = 2;
    plate_press = 0;
    STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    if (eject_gripper == 1)
    {
      TraceGripper(gripper_sequence, STAR);
    }
    STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  }

  function MoveGrowthPlateWithLidNoTap( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void {
    private variable x_acceleration;
    private variable grip_opening;
    private variable check_plate_on_get;
    private variable plate_press;
    private variable z_speed;
    private variable grip_width;
    private variable grip_speed;
    private variable grip_force;
    private variable check_plate_on_put;
    private variable grip_height;
    if (new_front_gripper == 1)
    {
      GetNewFrontChannel();
    }
    else
    {
      CheckFrontChannel();
    }
    grip_height = 11;
    grip_width = 80;
    grip_opening = 88;
    grip_force = 5;
    z_speed = 75;
    grip_speed = 277;
    check_plate_on_get = 0;
    check_plate_on_put = 0;
    x_acceleration = 2;
    plate_press = 0;
    STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    if (eject_gripper == 1)
    {
      TraceGripper(gripper_sequence, STAR);
    }
    STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  }

  function MoveCytometryPlateWithLid( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void {
    private variable grip_width;
    private variable grip_force;
    private variable grip_height;
    private variable z_shift;
    if (new_front_gripper == 1)
    {
      GetNewFrontChannel();
    }
    else
    {
      CheckFrontChannel();
    }
    grip_height = 11;
    grip_width = 83.3;
    grip_force = 5;
    z_shift = 1;
    MovePlateWithLidAndTap(move_from_seq, lid_from_seq, move_to_seq, lid_to_seq, gripper_sequence, new_front_gripper, eject_gripper, STAR, grip_height, grip_width, grip_force, z_shift);
  }

  function MoveGrowthPlateFromThermoShake( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void {
    private variable grip_width;
    private variable grip_force;
    private variable grip_height;
    private variable z_shift;
    if (new_front_gripper == 1)
    {
      GetNewFrontChannel();
    }
    else
    {
      CheckFrontChannel();
    }
    grip_height = 11;
    grip_width = 80;
    grip_force = 5;
    z_shift = 1;
    MovePlateWithLidAndTap(move_from_seq, lid_from_seq, move_to_seq, lid_to_seq, gripper_sequence, new_front_gripper, eject_gripper, STAR, grip_height, grip_width, grip_force, z_shift);
  }

  function MoveEppendorfDWPWithLid( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void {
    private variable grip_width;
    private variable grip_force;
    private variable grip_height;
    private variable z_shift;
    if (new_front_gripper == 1)
    {
      GetNewFrontChannel();
    }
    else
    {
      CheckFrontChannel();
    }
    grip_height = 10;
    grip_width = 78.95;
    grip_force = 5;
    z_shift = 1;
    MovePlateWithLidAndTap(move_from_seq, lid_from_seq, move_to_seq, lid_to_seq, gripper_sequence, new_front_gripper, eject_gripper, STAR, grip_height, grip_width, grip_force, z_shift);
  }

  function MoveSupportPlateNoLid( sequence move_from_seq, sequence move_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void {
    private variable x_acceleration;
    private variable grip_opening;
    private variable check_plate_on_get;
    private variable plate_press;
    private variable z_speed;
    private variable grip_width;
    private variable grip_speed;
    private variable grip_force;
    private variable check_plate_on_put;
    private variable grip_height;
    if (new_front_gripper == 1)
    {
      GetNewFrontChannel();
    }
    else
    {
      CheckFrontChannel();
    }
    grip_height = 13;
    grip_width = 79.5;
    grip_opening = 88;
    grip_force = 5;
    z_speed = 75;
    grip_speed = 277;
    check_plate_on_get = 0;
    check_plate_on_put = 1;
    x_acceleration = 2;
    plate_press = 0;
    STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  }

  function MoveAgarPlateWithLid( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void {
    private variable grip_width;
    private variable grip_force;
    private variable grip_height;
    private variable z_shift;
    if (new_front_gripper == 1)
    {
      GetNewFrontChannel();
    }
    else
    {
      CheckFrontChannel();
    }
    grip_height = 13;
    grip_width = 80;
    grip_force = 5;
    z_shift = 1;
    MovePlateWithLidAndTap(move_from_seq, lid_from_seq, move_to_seq, lid_to_seq, gripper_sequence, new_front_gripper, eject_gripper, STAR, grip_height, grip_width, grip_force, z_shift);
  }

  function MoveAgarPlateFromThermoShake( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void {
    private variable grip_width;
    private variable grip_force;
    private variable grip_height;
    private variable z_shift;
    if (new_front_gripper == 1)
    {
      GetNewFrontChannel();
    }
    else
    {
      CheckFrontChannel();
    }
    grip_height = 11;
    grip_width = 80;
    grip_force = 9;
    z_shift = 1;
    MovePlateWithLidAndTap(move_from_seq, lid_from_seq, move_to_seq, lid_to_seq, gripper_sequence, new_front_gripper, eject_gripper, STAR, grip_height, grip_width, grip_force, z_shift);
  }

  function MoveN3BufferWithLid( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void {
    private variable grip_width;
    private variable grip_force;
    private variable grip_height;
    private variable z_shift;
    if (new_front_gripper == 1)
    {
      GetNewFrontChannel();
    }
    else
    {
      CheckFrontChannel();
    }
    grip_height = 11;
    grip_width = 79;
    grip_force = 9;
    z_shift = 1;
    MovePlateWithLidAndTap(move_from_seq, lid_from_seq, move_to_seq, lid_to_seq, gripper_sequence, new_front_gripper, eject_gripper, STAR, grip_height, grip_width, grip_force, z_shift);
  }

  function MoveNuncOmniTrayWithLid( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void {
    private variable grip_width;
    private variable grip_force;
    private variable grip_height;
    private variable z_shift;
    if (new_front_gripper == 1)
    {
      GetNewFrontChannel();
    }
    else
    {
      CheckFrontChannel();
    }
    grip_height = 11;
    grip_width = 79.5;
    grip_force = 5;
    z_shift = 1;
    MovePlateWithLidAndTap(move_from_seq, lid_from_seq, move_to_seq, lid_to_seq, gripper_sequence, new_front_gripper, eject_gripper, STAR, grip_height, grip_width, grip_force, z_shift);
  }

  function MoveSupportPlateNoLidNoTap( sequence move_from_seq, sequence move_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void {
    private variable x_acceleration;
    private variable grip_opening;
    private variable check_plate_on_get;
    private variable plate_press;
    private variable z_speed;
    private variable grip_width;
    private variable grip_speed;
    private variable grip_force;
    private variable check_plate_on_put;
    private variable grip_height;
    if (new_front_gripper == 1)
    {
      GetNewFrontChannel();
    }
    else
    {
      CheckFrontChannel();
    }
    grip_height = 13;
    grip_width = 79;
    grip_opening = 88;
    grip_force = 7;
    z_speed = 75;
    grip_speed = 277;
    check_plate_on_get = 0;
    check_plate_on_put = 0;
    x_acceleration = 2;
    plate_press = 0;
    STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  }

  function MoveEppendorfDWPNoLidNoTap( sequence move_from_seq, sequence move_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void {
    private variable x_acceleration;
    private variable grip_opening;
    private variable check_plate_on_get;
    private variable plate_press;
    private variable z_speed;
    private variable grip_width;
    private variable grip_speed;
    private variable grip_force;
    private variable check_plate_on_put;
    private variable grip_height;
    if (new_front_gripper == 1)
    {
      GetNewFrontChannel();
    }
    else
    {
      CheckFrontChannel();
    }
    grip_height = 15;
    grip_width = 78.95;
    grip_opening = 88;
    grip_force = 5;
    z_speed = 75;
    grip_speed = 277;
    check_plate_on_get = 0;
    check_plate_on_put = 0;
    x_acceleration = 2;
    plate_press = 0;
    STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  }

  function MoveAbgenePlateWithLid( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void {
    private variable grip_width;
    private variable grip_force;
    private variable grip_height;
    private variable z_shift;
    if (new_front_gripper == 1)
    {
      GetNewFrontChannel();
    }
    else
    {
      CheckFrontChannel();
    }
    grip_height = 11;
    grip_width = 79.35;
    grip_force = 4;
    z_shift = 1;
    MovePlateWithLidAndTap(move_from_seq, lid_from_seq, move_to_seq, lid_to_seq, gripper_sequence, new_front_gripper, eject_gripper, STAR, grip_height, grip_width, grip_force, z_shift);
  }

  function MoveAbgenePlateFromThermoShake( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void {
    private variable grip_height;
    private variable grip_width;
    private variable grip_force;
    private variable z_shift;
    private variable check_plate_on_put;
    if (new_front_gripper == 1)
    {
      GetNewFrontChannel();
    }
    else
    {
      CheckFrontChannel();
    }
    grip_height = 11;
    grip_width = 79.35;
    grip_force = 4;
    z_shift = 1;
    check_plate_on_put = 0;
    MovePlateWithLidAndTap(move_from_seq, lid_from_seq, move_to_seq, lid_to_seq, gripper_sequence, new_front_gripper, eject_gripper, STAR, grip_height, grip_width, grip_force, z_shift);
  }

  function MoveAgilent86mLSingleResWithLid( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void {
    private variable grip_width;
    private variable grip_force;
    private variable grip_height;
    private variable z_shift;
    if (new_front_gripper == 1)
    {
      GetNewFrontChannel();
    }
    else
    {
      CheckFrontChannel();
    }
    grip_height = 11;
    grip_width = 80;
    grip_force = 5;
    z_shift = 1;
    MovePlateWithLidAndTap(move_from_seq, lid_from_seq, move_to_seq, lid_to_seq, gripper_sequence, new_front_gripper, eject_gripper, STAR, grip_height, grip_width, grip_force, z_shift);
  }

  private function MovePlateWithLidAndTap( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR, variable grip_height, variable grip_width, variable grip_force, variable z_shift ) void {
    private variable x_acceleration;
    private variable grip_opening;
    private variable check_plate_on_get;
    private variable plate_press;
    private variable z_speed;
    private variable grip_speed;
    private variable check_plate_on_put;
    private variable z_unshift;
    if (new_front_gripper == 1)
    {
      GetNewFrontChannel();
    }
    else
    {
      CheckFrontChannel();
    }
    grip_opening = 88;
    z_speed = 75;
    grip_speed = 277;
    check_plate_on_get = 0;
    check_plate_on_put = 1;
    x_acceleration = 1;
    plate_press = 0;
    STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    LMSF_UTILITIES::SeqZShift(move_to_seq, z_shift, STAR);
    if (eject_gripper == 1)
    {
      TraceGripper(gripper_sequence, STAR);
    }
    STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    z_unshift = z_shift * -1;
    LMSF_UTILITIES::SeqZShift(move_to_seq, z_unshift, STAR);
  }

  private function TraceGripper( sequence gripper_sequence, device & STAR ) void {
    private variable grip_labware_id;
    private variable grip_r;
    private variable grip_x;
    private variable grip_y;
    private variable grip_z;
    grip_labware_id = SeqGetLabwareId(gripper_sequence);
    HSLLabwrAccess::AbsolutePositionValuesGetForLabwareID(STAR, grip_labware_id, grip_x, grip_y, grip_z, grip_r);
    TrcTrace(Translate("Ejecting grippers after move, front channel: "), front_channel);
    TrcTrace8("grip_x: ", grip_x, ", grip_y: ", grip_y, ", grip_z: ", grip_z, ", grip_r: ", grip_r);
  }

  function SetFrontChannel( variable i_front ) void {
    front_channel = i_front;
    TrcTrace(Translate("User selected front channel for CORE grippers: "), front_channel);
  }

  function MoveAbegeneFromThermoShakeNoTap( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void {
    private variable z_shift;
    private variable grip_width;
    private variable grip_force;
    private variable grip_height;
    private variable x_acceleration;
    private variable grip_opening;
    private variable check_plate_on_get;
    private variable plate_press;
    private variable z_speed;
    private variable grip_speed;
    private variable check_plate_on_put;
    if (new_front_gripper == 1)
    {
      GetNewFrontChannel();
    }
    else
    {
      CheckFrontChannel();
    }
    grip_height = 11;
    grip_width = 79.35;
    grip_opening = 88;
    grip_force = 4;
    z_shift = 1;
    z_speed = 75;
    grip_speed = 277;
    check_plate_on_get = 1;
    check_plate_on_put = 0;
    x_acceleration = 2;
    plate_press = 0;
    STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  }

  function MoveEppendorf500uLElutePlateWithLid( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void {
    private variable z_shift;
    private variable grip_width;
    private variable grip_force;
    private variable grip_height;
    if (new_front_gripper == 1)
    {
      GetNewFrontChannel();
    }
    else
    {
      CheckFrontChannel();
    }
    grip_height = 7.0;
    grip_width = 80.8;
    grip_force = 4;
    z_shift = 1;
    MovePlateWithLidAndTap(move_from_seq, lid_from_seq, move_to_seq, lid_to_seq, gripper_sequence, new_front_gripper, eject_gripper, STAR, grip_height, grip_width, grip_force, z_shift);
  }

  function MoveGreinerPlateWithLid( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void {
    private variable z_shift;
    private variable grip_width;
    private variable grip_force;
    private variable grip_height;
    if (new_front_gripper == 1)
    {
      GetNewFrontChannel();
    }
    else
    {
      CheckFrontChannel();
    }
    grip_height = 11;
    grip_width = 79.35;
    grip_force = 4;
    z_shift = 1;
    MovePlateWithLidAndTap(move_from_seq, lid_from_seq, move_to_seq, lid_to_seq, gripper_sequence, new_front_gripper, eject_gripper, STAR, grip_height, grip_width, grip_force, z_shift);
  }

  function MoveEppendorf350uLElutionPlateWithLid( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void {
    private variable z_shift;
    private variable grip_width;
    private variable grip_force;
    private variable grip_height;
    if (new_front_gripper == 1)
    {
      GetNewFrontChannel();
    }
    else
    {
      CheckFrontChannel();
    }
    grip_height = 8;
    grip_width = 80;
    grip_force = 4;
    z_shift = 1;
    MovePlateWithLidAndTap(move_from_seq, lid_from_seq, move_to_seq, lid_to_seq, gripper_sequence, new_front_gripper, eject_gripper, STAR, grip_height, grip_width, grip_force, z_shift);
  }

  function MoveBindPlateNoLid( sequence move_from_seq, sequence move_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR, variable z_shift ) void {
    private variable grip_width;
    private variable grip_force;
    private variable grip_height;
    if (new_front_gripper == 1)
    {
      GetNewFrontChannel();
    }
    else
    {
      CheckFrontChannel();
    }
    grip_height = 7;
    grip_width = 78;
    grip_force = 5;
    MovePlateNoLidNoTap(move_from_seq, move_to_seq, gripper_sequence, new_front_gripper, eject_gripper, STAR, grip_height, grip_width, grip_force, z_shift);
  }

  private function MovePlateNoLidNoTap( sequence move_from_seq, sequence move_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR, variable grip_height, variable grip_width, variable grip_force, variable z_shift ) void {
    private variable x_acceleration;
    private variable z_unshift;
    private variable grip_opening;
    private variable check_plate_on_get;
    private variable plate_press;
    private variable z_speed;
    private variable grip_speed;
    private variable check_plate_on_put;
    if (new_front_gripper == 1)
    {
      GetNewFrontChannel();
    }
    else
    {
      CheckFrontChannel();
    }
    grip_opening = 88;
    z_speed = 75;
    grip_speed = 277;
    check_plate_on_get = 0;
    check_plate_on_put = 0;
    x_acceleration = 1;
    plate_press = 0;
    STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    LMSF_UTILITIES::SeqZShift(move_to_seq, z_shift, STAR);
    if (eject_gripper == 1)
    {
      TraceGripper(gripper_sequence, STAR);
    }
    STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    z_unshift = z_shift * -1;
    LMSF_UTILITIES::SeqZShift(move_to_seq, z_unshift, STAR);
  }

  function MoveAgilentFPwithLid( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR, variable z_shift ) void {
    private variable grip_width;
    private variable grip_force;
    private variable grip_height;
    if (new_front_gripper == 1)
    {
      GetNewFrontChannel();
    }
    else
    {
      CheckFrontChannel();
    }
    grip_height = 11;
    grip_width = 80;
    grip_force = 5;
    MovePlateWithLidAndTap(move_from_seq, lid_from_seq, move_to_seq, lid_to_seq, gripper_sequence, new_front_gripper, eject_gripper, STAR, grip_height, grip_width, grip_force, z_shift);
  }

  function MoveBindPlateWithLid( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void {
    private variable z_shift;
    private variable grip_width;
    private variable grip_force;
    private variable grip_height;
    if (new_front_gripper == 1)
    {
      GetNewFrontChannel();
    }
    else
    {
      CheckFrontChannel();
    }
    grip_height = 11;
    grip_width = 78;
    grip_force = 5;
    z_shift = 1;
    MovePlateWithLidAndTap(move_from_seq, lid_from_seq, move_to_seq, lid_to_seq, gripper_sequence, new_front_gripper, eject_gripper, STAR, grip_height, grip_width, grip_force, z_shift);
  }
} // library namespace
