// {{{ 2 "SubmethodForwardDeclaration" ""
private function CleanUp(  ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;
// }} ""
// {{{ 5 "OnAbort" "Begin"
function OnAbort(  ) void {
// }} ""
// {{ 5 "OnAbort" "InitLocals"
// }} ""
// {{{ 20 1 0 "8bfec258_a087_4098_95b84de30df5b75c" "{7C4EF7A7-39BE-406a-897F-71F3A35B4093}"
CleanUp();
// }} ""
// {{{ 5 "OnAbort" "End"
}
// }} ""
// {{{ 5 "StartUp" "Begin"
private function StartUp(  ) void {
// }} ""
private variable tip_counter_array[];
// {{ 5 "StartUp" "InitLocals"
// }} ""
// {{{ 11 1 0 "ae6a9c83_9174_4cf2_a4d89039793a8385" "{7C4EF7A7-39BE-406a-897F-71F3A35B4093}"
TIP_HANDLING_WITH_96_HEAD::GetTipCounters(tip_counter_array, 1);
// }} ""
// {{ 12 1 0 "5a7fa2aa_7ced_40f6_b463113ab709744e" "{67A8F1C9-6546-41e9-AD2F-3C54F7818853}"
tip_counter_1000_channels=tip_counter_array.GetAt(1-1);
// }} ""
// {{ 13 1 0 "4727dcea_35ff_4ac5_b85fa83f2ffb8de5" "{67A8F1C9-6546-41e9-AD2F-3C54F7818853}"
tip_counter_300_channels=tip_counter_array.GetAt(2-1);
// }} ""
// {{ 14 1 0 "b0f13328_fedf_4f98_a841210791393044" "{67A8F1C9-6546-41e9-AD2F-3C54F7818853}"
tip_counter_50_channels=tip_counter_array.GetAt(3-1);
// }} ""
// {{{ 15 1 0 "59542881_e810_41eb_8123d64668923049" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
TipCount::Read2(ML_STAR.Tips_1000_Channels, tip_counter_1000_channels, ML_STAR);
// }} ""
// {{{ 16 1 0 "0329548f_a159_4325_950e0975bfd2b102" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
TipCount::Read2(ML_STAR.Tips_300_Channels, tip_counter_300_channels, ML_STAR);
// }} ""
// {{{ 17 1 0 "bca1ffe9_4274_4a51_8d488d5bdf944715" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
TipCount::Read2(ML_STAR.Tips_50_Channels, tip_counter_50_channels, ML_STAR);
// }} ""
// {{ 18 1 0 "332f0cb6_2d62_481a_9522d87a31b08de7" "ML_STAR:{1C0C0CB0-7C87-11D3-AD83-0004ACB1DCB2}"
{
	variable arrRetValues[];
	arrRetValues = ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("332f0cb6_2d62_481a_9522d87a31b08de7"); // Initialize
}
// }} ""
// {{{ 5 "StartUp" "End"
}
// }} ""
// {{{ 5 "CleanUp" "Begin"
private function CleanUp(  ) void {
// }} ""
// {{ 5 "CleanUp" "InitLocals"
// }} ""
// {{{ 6 1 0 "c03c8918_5f7e_4961_a81a7f3b50500530" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
TipCount::Write2(ML_STAR.Tips_1000_Channels, tip_counter_1000_channels, ML_STAR);
// }} ""
// {{{ 7 1 0 "9aae0930_661e_436e_b84b88a469f24e12" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
TipCount::Write2(ML_STAR.Tips_300_Channels, tip_counter_300_channels, ML_STAR);
// }} ""
// {{{ 8 1 0 "a2b50d9c_5e61_4345_9b43ff0223273e7a" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
TipCount::Write2(ML_STAR.Tips_50_Channels, tip_counter_50_channels, ML_STAR);
// }} ""
// {{{ 9 1 0 "a79f056e_7dfb_49af_9c160cc5c0cebf31" "{7C4EF7A7-39BE-406a-897F-71F3A35B4093}"
COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR, ML_STAR.clear_96_head_seq);
// }} ""
// {{{ 5 "CleanUp" "End"
}
// }} ""
/* {{ 2 "SubmethodInsertLine" "" */ // }} ""
// $$author=djross$$valid=0$$time=2022-11-07 09:50$$checksum=ef7593dd$$length=085$$