 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Sequence.hsl" }
 namespace _Method { #include "HSLExtensions\\Array.hsl" }
 namespace _Method { #include "HSLErrLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "Tip Handling with 96-Head.hs_" }
#include "Clear 300 tips.res"
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
variable tip_counter_50_channels;
variable tip_counter_1000_channels;
variable tip_counter_300_channels;
global device ML_STAR ("Clear 300 tips.lay", "ML_STAR", hslTrue);
variable clear_300_tips_to;
variable clear_300_tips_from;
variable seq_300_pos;
variable seq_300_lab_id;
variable clear_from_lab_id;
variable remove_pos;
variable loopCounter1;
variable remove_pos_id;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    StartUp();
    GetParams();
    seq_300_pos = SeqGetPositionId(ML_STAR.Tips_300_Channels);
    seq_300_lab_id = SeqGetLabwareId(ML_STAR.Tips_300_Channels);
    TrcTrace(Translate("seq_300_lab_id: "), seq_300_lab_id);
    TrcTrace(Translate("seq_300_pos: "), seq_300_pos);
    TrcTrace(Translate("clear_300_tips_from: "), clear_300_tips_from);
    if (clear_300_tips_from == "1")
    {
      clear_from_lab_id = SeqGetLabwareId(ML_STAR.TipSupport_300_1);
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      {
        loopCounter1 = 0;
        while (seq_300_lab_id == clear_from_lab_id)
        {
          loopCounter1 = loopCounter1 + 1;
          SeqIncrement(ML_STAR.Tips_300_Channels, 1);
          seq_300_lab_id = SeqGetLabwareId(ML_STAR.Tips_300_Channels);
        }
      }
    }
    if (clear_300_tips_from == "2")
    {
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      COMMON96HEADSUBMETHODS::Eject96HeadTips(ML_STAR, ML_STAR.clear_96_head_seq);
      clear_from_lab_id = SeqGetLabwareId(ML_STAR.TipSupport_300_2);
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      SeqRemoveAll(ML_STAR.Tips_300_Channels);
    }
    TrcTrace(Translate("clear_from_lab_id: "), clear_from_lab_id);
    TrcTrace(Translate("clear_300_tips_to: "), clear_300_tips_to);
    if (clear_300_tips_to == "1")
    {
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    if (clear_300_tips_to == "2")
    {
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    if (clear_300_tips_to == "3")
    {
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
  } }
