private function CleanUp(  ) void ;
private function GetParams(  ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function StartUp(  ) void {
  private variable tip_counter_array[];
  TIP_HANDLING_WITH_96_HEAD::GetTipCounters(tip_counter_array, 1);
  tip_counter_1000_channels=tip_counter_array.GetAt(1-1);
  tip_counter_300_channels=tip_counter_array.GetAt(2-1);
  tip_counter_50_channels=tip_counter_array.GetAt(3-1);
  TipCount::Read2(ML_STAR.Tips_300_Channels, tip_counter_300_channels, ML_STAR);
  if(0){
    TipCount::Edit2(ML_STAR.Tips_300_Channels, tip_counter_300_channels, ML_STAR, 300);
  }
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
}

private function CleanUp(  ) void {
  TipCount::Write2(ML_STAR.Tips_300_Channels, tip_counter_300_channels, ML_STAR);
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR, ML_STAR.clear_96_head_seq);
}

private function GetParams(  ) void {
  private variable param_dict;
  private variable loc;
  private variable loopCounter2;
  private variable read_line;
  private file file1;
  private variable split_line[];
  param_dict = "param_dict";
  HSLExtensions::Dictionary::CreateDictionary(param_dict, 2);
  file1.AddField(1, read_line, hslString);
  file1.SetDelimiter(hslAsciiText);
  if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    while (
       (file1.Eof() == 0)
    )
    {
      loopCounter2 = loopCounter2 + 1;
      if( 0 == file1.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      loc = StrFind(read_line, ",");
      if (loc > 0)
      {
        split_line = HSLExtensions::String::Split(read_line, Translate(","), 1);
        HSLExtensions::Dictionary::AddItem(param_dict, split_line.ElementAt( 1 -1), split_line.ElementAt( 2 -1));
      }
    }
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  clear_300_tips_from = HSLExtensions::Dictionary::GetItem(param_dict, Translate("clear_300_tips_from"));
  clear_300_tips_to = HSLExtensions::Dictionary::GetItem(param_dict, Translate("clear_300_tips_to"));
}
