global device ML_STAR ("Tip Handoffs with 96-Head to supports.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLExtensions\\Array.hsl" }
 namespace _Method { #include "HSLExtensions\\Directory.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
#include "Tip Handoffs with 96-Head to supports.res"
variable tip_counter_array[];
sequence tip_seq_arr[];
variable loopCounter1;
variable array_length;
variable tip_status_file;
sequence tip_supp_1_arr[];
sequence tip_supp_2_arr[];
variable counter_type;
variable is_high_vol;
variable supp_2_contains_tips;
variable labware_1_id;
variable tipsLine;
variable dir_exists;
variable supp_2_status_str;
variable is_std_vol;
variable is_low_vol;
variable tip_status_dir;
variable txtFileName;
variable supp_1_contains_tips;
variable tip_total_str;
variable tip_total;
variable is_offset;
variable tip_counter;
variable supp_1_status_str;
variable outputLine;
variable labware_2_id;
file file1;
file file2;
variable labware_arr[];
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    COMMON96HEADSUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    TIP_HANDLING_WITH_96_HEAD::GetTipCounters(tip_counter_array, 1);
    tip_status_file = TIP_HANDLING_WITH_96_HEAD::GetTipStatusFile();
    tip_seq_arr.SetSize(0);
    tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Channels);
    tip_seq_arr.AddAsLast(ML_STAR.Tips_300_Channels);
    tip_seq_arr.AddAsLast(ML_STAR.Tips_50_Channels);
    tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Offset);
    array_length=tip_counter_array.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < array_length;)
      {
        loopCounter1 = loopCounter1 + 1;
        TipCount::Edit2(tip_seq_arr.ElementAt( loopCounter1 -1), tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        TipCount::Write2(tip_seq_arr.ElementAt( loopCounter1 -1), tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
    tip_supp_1_arr.SetSize(0);
    tip_supp_1_arr.AddAsLast(ML_STAR.TipSupport_1000_1);
    tip_supp_1_arr.AddAsLast(ML_STAR.TipSupport_300_1);
    tip_supp_1_arr.AddAsLast(ML_STAR.TipSupport_50_1);
    tip_supp_1_arr.AddAsLast(ML_STAR.TipSupport_1000_offset_1);
    tip_supp_2_arr.SetSize(0);
    tip_supp_2_arr.AddAsLast(ML_STAR.TipSupport_1000_2);
    tip_supp_2_arr.AddAsLast(ML_STAR.TipSupport_300_2);
    tip_supp_2_arr.AddAsLast(ML_STAR.TipSupport_50_2);
    tip_supp_2_arr.AddAsLast(ML_STAR.TipSupport_1000_offset_2);
    array_length=tip_seq_arr.GetSize();
    tip_status_dir = HSLExtensions::File::GetDirectoryName(tip_status_file);
    dir_exists = HSLExtensions::Directory::Exists(tip_status_dir);
    if (dir_exists == 0)
    {
      HSLExtensions::Directory::Create(tip_status_dir);
    }
    file1.AddField("tip_counter", tip_counter, hslString, 255);
    file1.AddField("rack_1_status", supp_1_contains_tips, hslInteger);
    file1.AddField("rack_2_status", supp_2_contains_tips, hslInteger);
    file1.AddField("tip_total", tip_total, hslInteger);
    file1.SetDelimiter(hslCSVDelimited);
    if( 0 == file1.Open(tip_status_file, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, tip_status_file, "HxMetEdCompCmd");
    }
    {
      for(loopCounter1 = 0; loopCounter1 < array_length;)
      {
        loopCounter1 = loopCounter1 + 1;
        tip_counter=tip_counter_array.GetAt(loopCounter1-1);
        TipCount::Read2(tip_seq_arr.ElementAt( loopCounter1 -1), tip_counter, ML_STAR);
        tip_total = SeqGetTotal(tip_seq_arr.ElementAt( loopCounter1 -1));
        SeqGetLabwareIds(tip_seq_arr.ElementAt( loopCounter1 -1), labware_arr);
        labware_1_id = SeqGetLabwareId(tip_supp_1_arr.ElementAt( loopCounter1 -1));
        labware_2_id = SeqGetLabwareId(tip_supp_2_arr.ElementAt( loopCounter1 -1));
        supp_1_contains_tips = HSLExtensions::Array::ContainsValue(labware_arr, labware_1_id);
        supp_2_contains_tips = HSLExtensions::Array::ContainsValue(labware_arr, labware_2_id);
        if( 0 == file1.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    txtFileName = HSLExtensions::File::CreateFullFileName(tip_status_dir, "tip_status.txt");
    file2.AddField(1, outputLine, hslString);
    file2.SetDelimiter(hslAsciiText);
    if( 0 == file2.Open(txtFileName, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, txtFileName, "HxMetEdCompCmd");
    }
    {
      for(loopCounter1 = 0; loopCounter1 < array_length;)
      {
        loopCounter1 = loopCounter1 + 1;
        tip_counter=tip_counter_array.GetAt(loopCounter1-1);
        TipCount::Read2(tip_seq_arr.ElementAt( loopCounter1 -1), tip_counter, ML_STAR);
        tip_total = SeqGetTotal(tip_seq_arr.ElementAt( loopCounter1 -1));
        SeqGetLabwareIds(tip_seq_arr.ElementAt( loopCounter1 -1), labware_arr);
        labware_1_id = SeqGetLabwareId(tip_supp_1_arr.ElementAt( loopCounter1 -1));
        labware_2_id = SeqGetLabwareId(tip_supp_2_arr.ElementAt( loopCounter1 -1));
        supp_1_contains_tips = HSLExtensions::Array::ContainsValue(labware_arr, labware_1_id);
        supp_2_contains_tips = HSLExtensions::Array::ContainsValue(labware_arr, labware_2_id);
        if (supp_1_contains_tips == 0)
        {
          if (supp_2_contains_tips == 0)
          {
            tip_total = 0;
          }
        }
        is_offset = StrFind(tip_counter, "offset");
        if (is_offset > -1)
        {
          counter_type = "Offset";
        }
        else
        {
          is_high_vol = StrFind(tip_counter, "1000");
          is_std_vol = StrFind(tip_counter, "300");
          is_low_vol = StrFind(tip_counter, "50");
          if (is_high_vol > -1)
          {
            counter_type = "1000";
          }
          else
          {
            if (is_std_vol > -1)
            {
              counter_type = "300";
            }
            else
            {
              if (is_low_vol > -1)
              {
                counter_type = "50";
              }
              else
              {
                counter_type = "Error";
              }
            }
          }
        }
        tipsLine = "tips" + counter_type;
        outputLine = tipsLine + "Status1,";
        supp_1_status_str = StrIStr(supp_1_contains_tips);
        outputLine = outputLine + supp_1_status_str;
        outputLine = outputLine + "\n";
        if( 0 == file2.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        outputLine = tipsLine + "Status2,";
        supp_2_status_str = StrIStr(supp_2_contains_tips);
        outputLine = outputLine + supp_2_status_str;
        outputLine = outputLine + "\n";
        if( 0 == file2.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        outputLine = tipsLine + "Total,";
        tip_total_str = StrIStr(tip_total);
        outputLine = outputLine + tip_total_str;
        outputLine = outputLine + "\n";
        if( 0 == file2.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != file2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file2.RemoveFields();
    CleanUp();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
  } }
