 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Sequence.hsl" }
 namespace _Method { #include "HSLExtensions\\Array.hsl" }
 namespace _Method { #include "HSLErrLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "..\\Tip Handling with 96-Head.hs_" }
#include "..\\Clear 300 tips.res"
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
global device ML_STAR ("..\\Clear 300 tips.lay", "ML_STAR", hslTrue);
variable clear_300_tips_to;
variable clear_300_tips_from;
variable seq_300_pos;
variable seq_300_lab_id;
variable clear_from_lab_id;
variable loopCounter1;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    StartUp();
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
  } }
