 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Sequence.hsl" }
 namespace _Method { #include "HSLExtensions\\Array.hsl" }
#include "..\\Tip Handoffs with 96-Head to supports.res"
 namespace _Method { #include "HSLErrLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "..\\Tip Handling with 96-Head.hs_" }
global device ML_STAR ("..\\Tip Handoffs with 96-Head to supports.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR, ML_STAR.clear_96_head_seq);
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
  } }
