#pragma once
#include "HSLSeqLib.hsl"
#include "HSLExtensions\\Array.hsl"
#include "HSLExtensions\\Sequence.hsl"
#include "HSLErrLib.hsl"
#include "Common\\LMSF_Utilities.hs_"
#include "Common\\Common96HeadSubMethods.hs_"
#include "HSLExtensions\\File.hsl"
#include "HSL_WasteChute.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace TIP_HANDLING_WITH_96_HEAD {
  variable tip_counter_50_channels;
  variable tip_counter_1000_channels;
  variable tip_counter_300_channels;
  variable tip_status_file_path;
  variable tip_counter_1000_offset;
  variable tip_counter_1000_ch_auto;
  variable tip_counter_300_ch_auto;
  variable tip_counter_50_ch_auto;
  function AddTipsToDoubleSupp( device & ML_STAR, sequence & full_tip_sequence, sequence tip_support_1, sequence tip_support_2, sequence handoff_sequnce ) void ;
  function GetTipCounters( variable & tip_counter_arr[], variable is_auto ) void ;
  function GetTipStatusFile(  ) variable ;
  private function TipHandlingParameters(  ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    LMSF_UTILITIES::_InitLibrary();
    COMMON96HEADSUBMETHODS::_InitLibrary();
  }
  function _ExitLibrary() {
    LMSF_UTILITIES::_ExitLibrary();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
  }

  function AddTipsToDoubleSupp( device & ML_STAR, sequence & full_tip_sequence, sequence tip_support_1, sequence tip_support_2, sequence handoff_sequnce ) void {
    private variable labware_arr[];
    private variable labware_1_id;
    private variable direct_move;
    private variable tips_total;
    private variable position_id;
    private variable labware_id;
    private variable loopCounter1;
    private sequence new_sequence;
    private variable err_str;
    private variable labware_2_id;
    private variable supp_1_contains_tips;
    private variable supp_2_contains_tips;
    SeqGetLabwareIds(full_tip_sequence, labware_arr);
    labware_1_id = SeqGetLabwareId(tip_support_1);
    labware_2_id = SeqGetLabwareId(tip_support_2);
    supp_1_contains_tips = HSLExtensions::Array::ContainsValue(labware_arr, labware_1_id);
    supp_2_contains_tips = HSLExtensions::Array::ContainsValue(labware_arr, labware_2_id);
    if (supp_1_contains_tips == 0)
    {
      direct_move = 0;
      tips_total = SeqGetTotal(full_tip_sequence);
      if (supp_2_contains_tips == 0)
      {
        direct_move = 1;
      }
      if (tips_total == 96)
      {
        direct_move = 1;
      }
      if (direct_move == 1)
      {
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        full_tip_sequence = HSLExtensions::Sequence::Concat(tip_support_1, full_tip_sequence, 0);
      }
      else
      {
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        labware_id = SeqGetLabwareId(tip_support_1);
        SeqCopySequence(new_sequence, tip_support_1);
        SeqRemoveAll(new_sequence);
        {
          loopCounter1 = 0;
          while (
             (full_tip_sequence.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, full_tip_sequence, 1);
            loopCounter1 = loopCounter1 + 1;
            position_id = SeqGetPositionId(full_tip_sequence);
            SeqAddEx(new_sequence, labware_id, position_id, ML_STAR);
            SeqIncrement(full_tip_sequence, 1);
            if (
               (full_tip_sequence.GetCurrentPosition() > 0 && full_tip_sequence.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          full_tip_sequence.SetMax(full_tip_sequence.GetTotal());
          full_tip_sequence.SetCurrentPosition(1);
        }
        new_sequence = HSLExtensions::Sequence::Concat(new_sequence, tip_support_2, 1);
        SeqCopySequence(full_tip_sequence, new_sequence);
      }
    }
    else
    {
      if (supp_2_contains_tips == 0)
      {
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        full_tip_sequence = HSLExtensions::Sequence::Concat(full_tip_sequence, tip_support_2, 1);
      }
      else
      {
        err_str = "Error on adding tips to 1000 uL tip supports: Tip counters indicate that both supports contain tips.";
        ErrRaise(12701, err_str);
      }
    }
  }

  private function TipHandlingParameters(  ) void {
    private variable tip_status_file;
    private variable tip_folder_path;
    tip_counter_1000_channels = "Tips_for_channels_1000";
    tip_counter_300_channels = "Tips_for_channels_300";
    tip_counter_50_channels = "Tips_for_channels_50";
    tip_counter_1000_ch_auto = "Tips_for_ch_1000_auto";
    tip_counter_300_ch_auto = "Tips_for_ch_300_auto";
    tip_counter_50_ch_auto = "Tips_for_ch_50_auto";
    tip_counter_1000_offset = Translate("Tips_for_offset_pickup");
    tip_folder_path = "C:\\Shared Files\\LMSF Scheduler\\Hamilton\\";
    tip_status_file = "tip_status.csv";
    tip_status_file_path = HSLExtensions::File::CreateFullFileName(tip_folder_path, tip_status_file);
  }

  function GetTipCounters( variable & tip_counter_arr[], variable is_auto ) void {
    tip_counter_arr.SetSize( 0);
    TipHandlingParameters();
    tip_counter_arr.SetSize(0);
    if (is_auto == 1)
    {
      tip_counter_arr.AddAsLast(tip_counter_1000_ch_auto);
      tip_counter_arr.AddAsLast(tip_counter_300_ch_auto);
      tip_counter_arr.AddAsLast(tip_counter_50_ch_auto);
      tip_counter_arr.AddAsLast(tip_counter_1000_offset);
    }
    else
    {
      tip_counter_arr.AddAsLast(tip_counter_1000_channels);
      tip_counter_arr.AddAsLast(tip_counter_300_channels);
      tip_counter_arr.AddAsLast(tip_counter_50_channels);
      tip_counter_arr.AddAsLast(tip_counter_1000_offset);
    }
  }

  function GetTipStatusFile(  ) variable {
    TipHandlingParameters();
    return (tip_status_file_path);
  }
} // library namespace
