#pragma once
#include "LMSF_Utilities.hs_"
#include "HSLUtilLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace ISWAP_PLATEANDLIDMOVEMENT {
  private function LidDropError(  ) void ;
  function MoveComfortLid( sequence lid_from_seq, sequence lid_to_seq, variable var_ParkAfterMove, variable inverse_grip, device & STAR ) void ;
  function MoveEppendorf350uLElutionPlateWithLid( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, variable var_ParkAfterMove, variable inverse_grip, device & STAR ) void ;
  function MoveLid( sequence lid_from_seq, sequence lid_to_seq, variable var_ParkAfterMove, variable inverse_grip, device & STAR ) void ;
  function MoveMidiPlate( sequence move_from_seq, sequence move_to_seq, variable var_ParkAfterMove, variable inverse_grip, device & STAR ) void ;
  function MovePCRPlate( sequence move_from_seq, sequence move_to_seq, variable var_ParkAfterMove, variable inverse_grip, device & STAR ) void ;
  function MovePCRPlateWithLid( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, variable var_ParkAfterMove, variable inverse_grip, device & STAR ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    LMSF_UTILITIES::_InitLibrary();
  }
  function _ExitLibrary() {
    LMSF_UTILITIES::_ExitLibrary();
  }

  function MoveComfortLid( sequence lid_from_seq, sequence lid_to_seq, variable var_ParkAfterMove, variable inverse_grip, device & STAR ) void {
    private variable grip_opening;
    private variable grip_width;
    private variable grip_force;
    private variable grip_height;
    grip_height = 5;
    grip_width = 85.3;
    grip_opening = 88;
    grip_force = 1;
    STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    onerror goto errLabel_1 ;
    err.Clear();
    STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    errLabel_1 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      LidDropError();
    }   /* end if from skip handler if no error */
    if (var_ParkAfterMove == 1)
    {
      STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
  }

  function MoveLid( sequence lid_from_seq, sequence lid_to_seq, variable var_ParkAfterMove, variable inverse_grip, device & STAR ) void {
    private variable grip_opening;
    private variable grip_width;
    private variable grip_force;
    private variable grip_height;
    grip_height = 3;
    grip_width = 85.3;
    grip_opening = 88;
    grip_force = 3;
    STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    onerror goto errLabel_2 ;
    err.Clear();
    STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    errLabel_2 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      LidDropError();
    }   /* end if from skip handler if no error */
    if (var_ParkAfterMove == 1)
    {
      STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
  }

  function MovePCRPlateWithLid( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, variable var_ParkAfterMove, variable inverse_grip, device & STAR ) void {
    private variable grip_opening;
    private variable grip_width;
    private variable grip_force;
    private variable grip_height;
    grip_height = 8;
    grip_width = 81.5;
    grip_opening = 89;
    grip_force = 9;
    STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    if (var_ParkAfterMove == 1)
    {
      STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
  }

  function MoveMidiPlate( sequence move_from_seq, sequence move_to_seq, variable var_ParkAfterMove, variable inverse_grip, device & STAR ) void {
    private variable grip_opening;
    private variable grip_width;
    private variable grip_force;
    private variable grip_height;
    grip_height = 8;
    grip_width = 79;
    grip_opening = 87;
    grip_force = 9;
    STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    if (var_ParkAfterMove == 1)
    {
      STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
  }

  function MovePCRPlate( sequence move_from_seq, sequence move_to_seq, variable var_ParkAfterMove, variable inverse_grip, device & STAR ) void {
    private variable grip_opening;
    private variable grip_width;
    private variable grip_force;
    private variable grip_height;
    grip_height = 6;
    grip_width = 81.5;
    grip_opening = 89;
    grip_force = 9;
    STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    if (var_ParkAfterMove == 1)
    {
      STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
  }

  function MoveEppendorf350uLElutionPlateWithLid( sequence move_from_seq, sequence lid_from_seq, sequence move_to_seq, sequence lid_to_seq, variable var_ParkAfterMove, variable inverse_grip, device & STAR ) void {
    private variable grip_opening;
    private variable grip_width;
    private variable grip_force;
    private variable grip_height;
    grip_height = 8;
    grip_width = 80;
    grip_opening = 89;
    grip_force = 9;
    STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    if (var_ParkAfterMove == 1)
    {
      STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
  }

  private function LidDropError(  ) void {
    private dialog customDialog_3;
    Util::SendEMail(Translate("david.ross@nist.gov"), Translate("NGS-STAR Lid Drop error"), Translate(""));
    customDialog_3.InitCustomDialog("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");
    customDialog_3.ShowCustomDialog();
  }
} // library namespace
