 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
 namespace _Method { #include "GSF-IMS Project\\GSF-IMS.shared_submethods.hs_" }
 namespace _Method { #include "HSLExtensions\\Sequence.hsl" }
#include "LMSF tour method.res"
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable pipette_volume;
variable plate_number;
global device ML_STAR ("LMSF tour method.lay", "ML_STAR", hslTrue);
sequence media_pipette_arr[];
variable culture_volume;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("==============================================================\nThis method used for lab tours and demos. \nIt moves a growth plate from the handoff, \nthen pipettes some media/water into it, \nthen moves it back to the handoff\n=============================================================="));
    GetParams();
    StartUp();
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_source_lid, ML_STAR.Lid_parking_Media_trough, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    media_pipette_arr.SetSize(0);
    media_pipette_arr.AddAsLast(ML_STAR.media_pipette_1);
    media_pipette_arr.AddAsLast(ML_STAR.media_pipette_2);
    media_pipette_arr.AddAsLast(ML_STAR.media_pipette_3);
    media_pipette_arr.AddAsLast(ML_STAR.media_pipette_4);
    MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate and gradient starter plate\n=============================================================="));
    pipette_volume = culture_volume;
    if (is_pipetting == "true")
    {
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", 0);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
      PTL::SetTipHandlingState("TipCountingIdentifier", "");
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupChannelVariable", "");
      PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
      if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_1000_Channels) )
      {
            PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
      ML_STAR.Media_pipette_from.SetCurrentPosition(1);
      pipette_media(media_pipette_arr.ElementAt( plate_number -1), pipette_volume, 0);
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectChannelVariable", "");
      if( 0 == PTL::TipEject(ML_STAR) )
      {
            PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    else
    {
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Media_trough, ML_STAR.Media_source_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_ExitLibrary();
  } }
