private function CleanUp(  ) void ;
private function GetParams(  ) void ;
private function StartUp(  ) void ;
private function pipette_media( sequence & disp_seq, variable p_vol, variable pre_wet_tips ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function CleanUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        TipCount::Write2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        TipCount::Write2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        TipCount::Write2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 4)
      {
        TipCount::Write2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR, ML_STAR.clear_96_head_seq);
}

private function StartUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  TIP_HANDLING_WITH_96_HEAD::GetTipCounters(tip_counter_array, 1);
  tip_seq_arr.SetSize(0);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_300_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_50_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Offset_pickup);
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 4)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
}

private function pipette_media( sequence & disp_seq, variable p_vol, variable pre_wet_tips ) void {
  private sequence tips;
  {
    sequence arrseqAspirate_1[];
    sequence arrseqDispense_1[];
    arrseqAspirate_1.SetSize(1);
    arrseqAspirate_1.SetAt(0, ML_STAR.Media_pipette_from);
    arrseqDispense_1.SetSize(1);
    arrseqDispense_1.SetAt(0, disp_seq);
    PTL::ResetPipettingStateAndSequences("");
    PTL::SetPipettingState("UserResponseTime", hslInfinite);
    PTL::SetPipettingState("ErrorHandling", 5);
    PTL::SetPipettingState("TipCountingEnabled", hslFalse);
    PTL::SetPipettingState("TipCountingIdentifier", "");
    PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
    PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
    PTL::SetPipettingState("CalibrateCarrierChannel", -1);
    PTL::SetPipettingState("InitializeCustomStepID", 0);
    PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
    PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
    PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
    PTL::SetPipettingState("TipPickupCustomStepID", 11);
    PTL::SetPipettingState("TipEjectCustomStepID", 0);
    PTL::SetPipettingState("AspirateCustomStepID", 0);
    PTL::SetPipettingState("DispenseCustomStepID", 0);
    PTL::SetPipettingState("PreDispenseCustomStepID", 0);
    PTL::SetPipettingState("PostDispenseCustomStepID", 0);
    PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
    PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
    PTL::SetPipettingState("InitializeChannelVariable", "");
    PTL::SetPipettingState("InitializeEnabled", hslFalse);
    PTL::SetPipettingState("TipPickupChannelVariable", "");
    PTL::SetPipettingState("TipPickupEnabled", hslFalse);
    PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
    PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
    PTL::SetPipettingState("TipEjectChannelVariable", "");
    PTL::SetPipettingState("AspirateMode", 0);
    PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
    PTL::SetPipettingState("AspirateFluidHeight", 0);
    PTL::SetPipettingState("AspirateSubmergeDepth", 2);
    PTL::SetPipettingState("AspirateChannelVariable", "");
    PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
    PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
    PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
    PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
    PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
    PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
    PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
    PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
    PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
    PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
    PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
    PTL::SetPipettingState("DispenseSubmergeDepth", 0);
    PTL::SetPipettingState("DispenseChannelVariable", "");
    PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
    PTL::SetPipettingState("DispenseFluidHeight", 15);
    PTL::SetPipettingState("DispenseMode", 1);
    PTL::SetPipettingState("DispenseLiquidFollowing", hslFalse);
    PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
    PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
    PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
    PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
    PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
    PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
    PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
    PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
    PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
    PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
    PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
    if( 0 == PTL::Pipette3(ML_STAR, tips, arrseqAspirate_1, arrseqDispense_1, 1, 1, p_vol, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_pipette_from, disp_seq) )
    {
          PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
  }
}

private function GetParams(  ) void {
  private variable plate_num_str;
  private variable param_dict;
  private variable loc;
  private variable loopCounter2;
  private variable culture_volume_str;
  private variable read_line;
  private file file1;
  private variable split_line[];
  param_dict = "param_dict";
  HSLExtensions::Dictionary::CreateDictionary(param_dict, 2);
  file1.AddField(1, read_line, hslString);
  file1.SetDelimiter(hslAsciiText);
  if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    while (
       (file1.Eof() == 0)
    )
    {
      loopCounter2 = loopCounter2 + 1;
      if( 0 == file1.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      loc = StrFind(read_line, ",");
      if (loc > 0)
      {
        split_line = HSLExtensions::String::Split(read_line, Translate(","), 1);
        HSLExtensions::Dictionary::AddItem(param_dict, split_line.ElementAt( 1 -1), split_line.ElementAt( 2 -1));
      }
    }
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  is_pipetting = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isPipetting"));
  culture_volume_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("cultureVolume"));
  culture_volume = StrFVal(culture_volume_str);
  if (culture_volume > 500)
  {
    culture_volume = 500;
  }
  else
  {
    if (culture_volume < 200)
    {
      culture_volume = 200;
    }
  }
  plate_num_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("plateNum"));
  plate_number = StrIVal(plate_num_str);
}
