 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Directory.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLTimLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "..\\HSLTrcLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
#include "Double 2D gradient plus 1000x bacteria.lmsf.res"
 namespace _Method { #include "HSLExtensions\\File.hsl" }
variable loopCounter1;
variable mix_volume;
variable volume_left;
variable loopCounter2;
variable tip_counter_1000_channels;
variable tip_counter_1000_offset;
variable tip_counter_300_channels;
variable User_choice;
variable Bacteria_now;
dialog customDialog_1;
dialog customDialog_2;
variable inducer_stock_concentration;
variable additive_left_concentration;
variable additive_right_concentration;
variable additive_left_units;
variable additive_left_id;
variable additive_right_id;
variable inducer_id;
variable inducer_units;
variable additive_right_units;
variable plasmid_1_id;
variable worklist_file_path;
variable strain_1_id;
variable strain_str;
variable ind_conc_str;
variable right_add_conc_str;
variable left_add_conc_str;
variable plasmid_str;
variable bact_1_stock_str;
global device ML_STAR ("Double 2D gradient plus 1000x bacteria.lmsf.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    GetParams();
    StartUp();
    MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate and for inducer and chemical gradient dilutions\n=============================================================="));
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    {
      sequence arrseqAspirate_3[];
      sequence arrseqDispense_3[];
      arrseqAspirate_3.SetSize(1);
      arrseqAspirate_3.SetAt(0, ML_STAR.Media_source);
      arrseqDispense_3.SetSize(1);
      arrseqDispense_3.SetAt(0, ML_STAR.Media_extra_700);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 5);
      PTL::SetPipettingState("DispenseMode", 1);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.High_volume_tips_channels, arrseqAspirate_3, arrseqDispense_3, 1, 1, 700, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, ML_STAR.Media_extra_700) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    {
      sequence arrseqAspirate_4[];
      sequence arrseqDispense_4[];
      arrseqAspirate_4.SetSize(1);
      arrseqAspirate_4.SetAt(0, ML_STAR.Media_source);
      arrseqDispense_4.SetSize(1);
      arrseqDispense_4.SetAt(0, ML_STAR.IPTG_2x_1);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 5);
      PTL::SetPipettingState("DispenseMode", 1);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.High_volume_tips_channels, arrseqAspirate_4, arrseqDispense_4, 1, 1, 700, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, ML_STAR.IPTG_2x_1) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    {
      sequence arrseqAspirate_5[];
      sequence arrseqDispense_5[];
      arrseqAspirate_5.SetSize(1);
      arrseqAspirate_5.SetAt(0, ML_STAR.Media_source);
      arrseqDispense_5.SetSize(1);
      arrseqDispense_5.SetAt(0, ML_STAR.IPTG_2x_2);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 5);
      PTL::SetPipettingState("DispenseMode", 1);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.High_volume_tips_channels, arrseqAspirate_5, arrseqDispense_5, 1, 1, 550, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, ML_STAR.IPTG_2x_2) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    {
      sequence arrseqAspirate_6[];
      sequence arrseqDispense_6[];
      sequence seqMergedDispense_6;
      arrseqAspirate_6.SetSize(1);
      arrseqAspirate_6.SetAt(0, ML_STAR.Media_source);
      arrseqDispense_6.SetSize(2);
      arrseqDispense_6.SetAt(0, ML_STAR.Tet_2x);
      arrseqDispense_6.SetAt(1, ML_STAR.DOG_2x);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 5);
      PTL::SetPipettingState("DispenseMode", 1);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.High_volume_tips_channels, arrseqAspirate_6, arrseqDispense_6, 1, 1, 427, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, seqMergedDispense_6) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    {
      sequence arrseqAspirate_7[];
      sequence arrseqDispense_7[];
      arrseqAspirate_7.SetSize(1);
      arrseqAspirate_7.SetAt(0, ML_STAR.Media_source);
      arrseqDispense_7.SetSize(1);
      arrseqDispense_7.SetAt(0, ML_STAR.Media_dispense);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 5);
      PTL::SetPipettingState("DispenseMode", 1);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.High_volume_tips_channels, arrseqAspirate_7, arrseqDispense_7, 1, 1, 450, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, ML_STAR.Media_dispense) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    MECC::TraceComment(Translate("==============================================================\nDilute inducer (e.g. IPTG) stock into IPTG_2x wells\n=============================================================="));
    {
      sequence arrseqAspirate_8[];
      sequence arrseqDispense_8[];
      arrseqAspirate_8.SetSize(1);
      arrseqAspirate_8.SetAt(0, ML_STAR.IPTG_10x_stock);
      arrseqDispense_8.SetSize(1);
      arrseqDispense_8.SetAt(0, ML_STAR.IPTG_2x_1);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, arrseqAspirate_8, arrseqDispense_8, 1, 1, 200, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.IPTG_10x_stock, ML_STAR.IPTG_2x_1) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    {
      sequence arrseqAspirate_9[];
      sequence arrseqDispense_9[];
      arrseqAspirate_9.SetSize(1);
      arrseqAspirate_9.SetAt(0, ML_STAR.IPTG_10x_stock);
      arrseqDispense_9.SetSize(1);
      arrseqDispense_9.SetAt(0, ML_STAR.IPTG_2x_2);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, arrseqAspirate_9, arrseqDispense_9, 1, 1, 220, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.IPTG_10x_stock, ML_STAR.IPTG_2x_2) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    MECC::TraceComment(Translate("==============================================================\nDilute Chemical 1 (e.g. Tet) stock solution into Tet_2x wells\n=============================================================="));
    {
      sequence arrseqAspirate_10[];
      sequence arrseqDispense_10[];
      arrseqAspirate_10.SetSize(1);
      arrseqAspirate_10.SetAt(0, ML_STAR.Tet_10x_stock);
      arrseqDispense_10.SetSize(1);
      arrseqDispense_10.SetAt(0, ML_STAR.Tet_2x);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, arrseqAspirate_10, arrseqDispense_10, 1, 1, 122, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Tet_10x_stock, ML_STAR.Tet_2x) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    {
      sequence arrseqAspirate_11[];
      sequence arrseqDispense_11[];
      arrseqAspirate_11.SetSize(1);
      arrseqAspirate_11.SetAt(0, ML_STAR.Tet_10x_stock);
      arrseqDispense_11.SetSize(1);
      arrseqDispense_11.SetAt(0, ML_STAR.IPTG_and_Tet_2x);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, arrseqAspirate_11, arrseqDispense_11, 1, 1, 220, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Tet_10x_stock, ML_STAR.IPTG_and_Tet_2x) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    MECC::TraceComment(Translate("==============================================================\nDilute Chemical 2 (e.g. DOG) stock solution into DOG_2x wells\n=============================================================="));
    {
      sequence arrseqAspirate_12[];
      sequence arrseqDispense_12[];
      arrseqAspirate_12.SetSize(1);
      arrseqAspirate_12.SetAt(0, ML_STAR.DOG_10x_stock);
      arrseqDispense_12.SetSize(1);
      arrseqDispense_12.SetAt(0, ML_STAR.DOG_2x);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, arrseqAspirate_12, arrseqDispense_12, 1, 1, 122, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.DOG_10x_stock, ML_STAR.DOG_2x) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    {
      sequence arrseqAspirate_13[];
      sequence arrseqDispense_13[];
      arrseqAspirate_13.SetSize(1);
      arrseqAspirate_13.SetAt(0, ML_STAR.DOG_10x_stock);
      arrseqDispense_13.SetSize(1);
      arrseqDispense_13.SetAt(0, ML_STAR.IPTG_and_DOG_2x);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, arrseqAspirate_13, arrseqDispense_13, 1, 1, 220, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.DOG_10x_stock, ML_STAR.IPTG_and_DOG_2x) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    MECC::TraceComment(Translate("==============================================================\nPipete inducer dilution gradient\n=============================================================="));
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    {
      loopCounter2 = 0;
      while (
         (ML_STAR.IPTG_dilution_to_1.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.IPTG_dilution_from_1, 1, ML_STAR.IPTG_dilution_to_1, 1);
        loopCounter2 = loopCounter2 + 1;
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        if (
           (ML_STAR.IPTG_dilution_to_1.GetCurrentPosition() > 0 && ML_STAR.IPTG_dilution_to_1.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.IPTG_dilution_from_1.SetMax(ML_STAR.IPTG_dilution_from_1.GetTotal());
      ML_STAR.IPTG_dilution_to_1.SetMax(ML_STAR.IPTG_dilution_to_1.GetTotal());
      ML_STAR.IPTG_dilution_from_1.SetCurrentPosition(1);
      ML_STAR.IPTG_dilution_to_1.SetCurrentPosition(1);
    }
    COMMON96HEADSUBMETHODS::Eject96HeadTips(ML_STAR);
    {
      sequence arrseqAspirate_14[];
      sequence arrseqDispense_14[];
      arrseqAspirate_14.SetSize(1);
      arrseqAspirate_14.SetAt(0, ML_STAR.IPTG_dilution_from_2);
      arrseqDispense_14.SetSize(1);
      arrseqDispense_14.SetAt(0, ML_STAR.IPTG_dilution_to_2);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "11000000");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "11000000");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "11000000");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "11000000");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
      PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3);
      PTL::SetPipettingState("AspiratePrerinsingMixVolume", 800);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "11000000");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.High_volume_tips_channels, arrseqAspirate_14, arrseqDispense_14, 1, 1, 549, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.IPTG_dilution_from_2, ML_STAR.IPTG_dilution_to_2) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    MECC::TraceComment(Translate("==============================================================\nPipete Chemical 1 (Tet) dilution gradient\n=============================================================="));
    {
      sequence arrseqAspirate_15[];
      sequence arrseqDispense_15[];
      arrseqAspirate_15.SetSize(1);
      arrseqAspirate_15.SetAt(0, ML_STAR.Tet_dilution_from);
      arrseqDispense_15.SetSize(1);
      arrseqDispense_15.SetAt(0, ML_STAR.Tet_dilution_to);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
      PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3);
      PTL::SetPipettingState("AspiratePrerinsingMixVolume", 800);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslTrue);
      PTL::SetPipettingState("DispenseSequenceReducible", hslTrue);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.High_volume_tips_channels, arrseqAspirate_15, arrseqDispense_15, 1, 1, 450, 0, 1, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Tet_dilution_from, ML_STAR.Tet_dilution_to) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    MECC::TraceComment(Translate("==============================================================\nPipete Chemical 2 (DOG) dilution gradient\n=============================================================="));
    {
      sequence arrseqAspirate_16[];
      sequence arrseqDispense_16[];
      arrseqAspirate_16.SetSize(1);
      arrseqAspirate_16.SetAt(0, ML_STAR.DOG_dilution_from);
      arrseqDispense_16.SetSize(1);
      arrseqDispense_16.SetAt(0, ML_STAR.DOG_dilution_to);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
      PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3);
      PTL::SetPipettingState("AspiratePrerinsingMixVolume", 800);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslTrue);
      PTL::SetPipettingState("DispenseSequenceReducible", hslTrue);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.High_volume_tips_channels, arrseqAspirate_16, arrseqDispense_16, 1, 1, 450, 0, 1, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.DOG_dilution_from, ML_STAR.DOG_dilution_to) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    MECC::TraceComment(Translate("==============================================================\nPipette media for bacterial dilutions\n=============================================================="));
    {
      sequence arrseqAspirate_17[];
      sequence arrseqDispense_17[];
      sequence seqMergedDispense_17;
      arrseqAspirate_17.SetSize(1);
      arrseqAspirate_17.SetAt(0, ML_STAR.Media_source);
      arrseqDispense_17.SetSize(2);
      arrseqDispense_17.SetAt(0, ML_STAR.Bacteria_all_100x);
      arrseqDispense_17.SetAt(1, ML_STAR.Bacteria_all_10x);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 5);
      PTL::SetPipettingState("DispenseMode", 1);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.High_volume_tips_channels, arrseqAspirate_17, arrseqDispense_17, 1, 1, 810, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, seqMergedDispense_17) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    MECC::TraceComment(Translate("===================================================\nPause and wait for user response if bacteria to be loaded \"later\"\n==================================================="));
    if (Bacteria_now == "No")
    {
      MECC::TraceComment(Translate("        ===========================================\n        Pause...\n        ==========================================="));
      customDialog_2.InitCustomDialog("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");
      customDialog_2.SetCustomDialogProperty( "textBlock1.Text", bact_1_stock_str );
      customDialog_2.ShowCustomDialog();
      User_choice = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
      if (User_choice == 2)
      {
        abort;
      }
      customDialog_1.InitCustomDialog("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");
      customDialog_1.ShowCustomDialog();
      User_choice = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
      if (User_choice == 2)
      {
        abort;
      }
    }
    else
    {
      MECC::TraceComment(Translate("        ===========================================\n        No pause\n        ==========================================="));
    }
    MECC::TraceComment(Translate("==============================================================\nDilute bacteria in two steps\n=============================================================="));
    {
      sequence arrseqAspirate_18[];
      sequence arrseqDispense_18[];
      arrseqAspirate_18.SetSize(1);
      arrseqAspirate_18.SetAt(0, ML_STAR.Bacteria_stock_1);
      arrseqDispense_18.SetSize(1);
      arrseqDispense_18.SetAt(0, ML_STAR.Bacteria_all_100x);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
      PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3.5);
      PTL::SetPipettingState("AspiratePrerinsingMixVolume", 300);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      PTL::SetPipettingState("DispensePrerinsingMixCycles", 2);
      PTL::SetPipettingState("DispensePrerinsingMixPosition", 2);
      PTL::SetPipettingState("DispensePrerinsingMixVolume", 800);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.High_volume_tips_channels, arrseqAspirate_18, arrseqDispense_18, 1, 1, 90, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Bacteria_stock_1, ML_STAR.Bacteria_all_100x) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    {
      sequence arrseqAspirate_19[];
      sequence arrseqDispense_19[];
      arrseqAspirate_19.SetSize(1);
      arrseqAspirate_19.SetAt(0, ML_STAR.Bacteria_all_100x);
      arrseqDispense_19.SetSize(1);
      arrseqDispense_19.SetAt(0, ML_STAR.Bacteria_all_10x);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
      PTL::SetPipettingState("AspiratePrerinsingMixPosition", 5);
      PTL::SetPipettingState("AspiratePrerinsingMixVolume", 650);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      PTL::SetPipettingState("DispensePrerinsingMixCycles", 2);
      PTL::SetPipettingState("DispensePrerinsingMixPosition", 3.5);
      PTL::SetPipettingState("DispensePrerinsingMixVolume", 650);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.High_volume_tips_channels, arrseqAspirate_19, arrseqDispense_19, 1, 1, 90, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Bacteria_all_100x, ML_STAR.Bacteria_all_10x) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    MECC::TraceComment(Translate("==============================================================\nPipette Bacteria into plate, from low to high Tet, then low to high DOG\n=============================================================="));
    volume_left = 900;
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    {
      loopCounter1 = 0;
      while (
         (ML_STAR.Bacteria_dilution_to_Tet.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Bacteria_all_10x, 1, ML_STAR.Bacteria_dilution_to_Tet, 1);
        loopCounter1 = loopCounter1 + 1;
        ML_STAR.Bacteria_all_10x.SetCurrentPosition(1);
        mix_volume = volume_left - 100;
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        volume_left = volume_left - 50;
        if (
           (ML_STAR.Bacteria_dilution_to_Tet.GetCurrentPosition() > 0 && ML_STAR.Bacteria_dilution_to_Tet.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Bacteria_all_10x.SetMax(ML_STAR.Bacteria_all_10x.GetTotal());
      ML_STAR.Bacteria_dilution_to_Tet.SetMax(ML_STAR.Bacteria_dilution_to_Tet.GetTotal());
      ML_STAR.Bacteria_all_10x.SetCurrentPosition(1);
      ML_STAR.Bacteria_dilution_to_Tet.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    {
      loopCounter1 = 0;
      while (
         (ML_STAR.Bacteria_dilution_to_DOG.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Bacteria_all_10x, 1, ML_STAR.Bacteria_dilution_to_DOG, 1);
        loopCounter1 = loopCounter1 + 1;
        ML_STAR.Bacteria_all_10x.SetCurrentPosition(1);
        mix_volume = volume_left - 100;
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        volume_left = volume_left - 50;
        if (
           (ML_STAR.Bacteria_dilution_to_DOG.GetCurrentPosition() > 0 && ML_STAR.Bacteria_dilution_to_DOG.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Bacteria_all_10x.SetMax(ML_STAR.Bacteria_all_10x.GetTotal());
      ML_STAR.Bacteria_dilution_to_DOG.SetMax(ML_STAR.Bacteria_dilution_to_DOG.GetTotal());
      ML_STAR.Bacteria_all_10x.SetCurrentPosition(1);
      ML_STAR.Bacteria_dilution_to_DOG.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    CalculateOutputs();
    SaveWorklistAndMetadata();
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
  } }
