private function CalculateOutputs(  ) void ;
private function CleanUp(  ) void ;
private function GetParams(  ) void ;
private function SaveWorklistAndMetadata(  ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function CleanUp(  ) void {
  TipCount::Write2(ML_STAR.High_volume_tips_channels, tip_counter_1000_channels, ML_STAR);
  TipCount::Write2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, tip_counter_300_channels, ML_STAR);
  TipCount::Write2(ML_STAR.Offset_pickup, tip_counter_1000_offset, ML_STAR);
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR);
}

private function StartUp(  ) void {
  tip_counter_1000_channels = Translate("Tips_for_channels_1000");
  tip_counter_300_channels = Translate("Tips_for_channels_300");
  tip_counter_1000_offset = Translate("Tips_for_offset_pickup");
  TipCount::Read2(ML_STAR.High_volume_tips_channels, tip_counter_1000_channels, ML_STAR);
  TipCount::Read2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, tip_counter_300_channels, ML_STAR);
  TipCount::Read2(ML_STAR.Offset_pickup, tip_counter_1000_offset, ML_STAR);
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
}

private function CalculateOutputs(  ) void {
  private variable right_conc;
  private variable inducer_conc;
  private variable left_conc;
  private variable well_id;
  private variable labware_id;
  private variable strain;
  private variable plasmid;
  private variable loopCounter3;
  ind_conc_str = "inducer_conc";
  left_add_conc_str = "left_add_conc";
  right_add_conc_str = "right_add_conc";
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, ind_conc_str, 0);
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, left_add_conc_str, 0);
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, right_add_conc_str, 0);
  labware_id = "";
  well_id = "";
  inducer_conc = inducer_stock_concentration / (10 * 1.0);
  {
    loopCounter2 = 0;
    ML_STAR.IPTG_dilution_to_1.SetCurrentPosition(1);
    while (
       (ML_STAR.IPTG_dilution_to_1.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.IPTG_dilution_to_1, 1);
      loopCounter2 = loopCounter2 + 1;
      {
        for(loopCounter3 = 0; loopCounter3 < 12;)
        {
          loopCounter3 = loopCounter3 + 1;
          labware_id = SeqGetLabwareId(ML_STAR.IPTG_dilution_to_1);
          well_id = SeqGetPositionId(ML_STAR.IPTG_dilution_to_1);
          LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, ind_conc_str, inducer_conc);
          SeqIncrement(ML_STAR.IPTG_dilution_to_1, 1);
        }
      }
      inducer_conc = inducer_conc / (2 * 1.0);
      if (
         (ML_STAR.IPTG_dilution_to_1.GetCurrentPosition() > 0 && ML_STAR.IPTG_dilution_to_1.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.IPTG_dilution_to_1.SetMax(ML_STAR.IPTG_dilution_to_1.GetTotal());
    ML_STAR.IPTG_dilution_to_1.SetCurrentPosition(1);
  }
  left_conc = additive_left_concentration / (10 * 1.0);
  {
    loopCounter2 = 0;
    ML_STAR.Tet_dilution_to.SetCurrentPosition(1);
    while (
       (ML_STAR.Tet_dilution_to.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.Tet_dilution_to, 1);
      loopCounter2 = loopCounter2 + 1;
      {
        for(loopCounter3 = 0; loopCounter3 < 8;)
        {
          loopCounter3 = loopCounter3 + 1;
          labware_id = SeqGetLabwareId(ML_STAR.Tet_dilution_to);
          well_id = SeqGetPositionId(ML_STAR.Tet_dilution_to);
          LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, left_add_conc_str, left_conc);
          SeqIncrement(ML_STAR.Tet_dilution_to, 1);
        }
      }
      left_conc = left_conc / (2 * 1.0);
      if (
         (ML_STAR.Tet_dilution_to.GetCurrentPosition() > 0 && ML_STAR.Tet_dilution_to.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.Tet_dilution_to.SetMax(ML_STAR.Tet_dilution_to.GetTotal());
    ML_STAR.Tet_dilution_to.SetCurrentPosition(1);
  }
  right_conc = additive_right_concentration / (10 * 1.0);
  {
    loopCounter2 = 0;
    ML_STAR.DOG_dilution_to.SetCurrentPosition(1);
    while (
       (ML_STAR.DOG_dilution_to.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.DOG_dilution_to, 1);
      loopCounter2 = loopCounter2 + 1;
      {
        for(loopCounter3 = 0; loopCounter3 < 8;)
        {
          loopCounter3 = loopCounter3 + 1;
          labware_id = SeqGetLabwareId(ML_STAR.DOG_dilution_to);
          well_id = SeqGetPositionId(ML_STAR.DOG_dilution_to);
          LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, right_add_conc_str, right_conc);
          SeqIncrement(ML_STAR.DOG_dilution_to, 1);
        }
      }
      right_conc = right_conc / (2 * 1.0);
      if (
         (ML_STAR.DOG_dilution_to.GetCurrentPosition() > 0 && ML_STAR.DOG_dilution_to.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.DOG_dilution_to.SetMax(ML_STAR.DOG_dilution_to.GetTotal());
    ML_STAR.DOG_dilution_to.SetCurrentPosition(1);
  }
  strain_str = "strain";
  plasmid_str = "plasmid";
  strain = strain_1_id;
  plasmid = plasmid_1_id;
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, strain_str, strain);
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, plasmid_str, plasmid);
}

private function SaveWorklistAndMetadata(  ) void {
  private variable right_conc;
  private variable inducer_conc;
  private variable row_id;
  private variable left_conc;
  private variable well_id;
  private variable plasmid;
  private variable strain;
  private variable position;
  private variable column_id;
  private variable column_id_str;
  private file file1;
  private variable iniFilePath;
  private variable iniDir;
  private variable iniExists;
  file1.AddField("position", position, hslInteger);
  file1.AddField("well", well_id, hslString, 255);
  file1.AddField("row", row_id, hslString, 255);
  file1.AddField("column", column_id, hslInteger);
  file1.AddField("inducerId", inducer_id, hslString, 255);
  file1.AddField("inducerConcentration", inducer_conc, hslFloat);
  file1.AddField("inducerUnits", inducer_units, hslString, 255);
  file1.AddField("leftAdditiveId", additive_left_id, hslString, 255);
  file1.AddField("leftAdditiveConc", left_conc, hslString, 255);
  file1.AddField("leftAdditiveUnits", additive_left_units, hslString, 255);
  file1.AddField("rightAdditiveId", additive_right_id, hslString, 255);
  file1.AddField("rightAdditiveConc", right_conc, hslString, 255);
  file1.AddField("rightAdditiveUnits", additive_right_units, hslString, 255);
  file1.AddField(strain_str, strain, hslString, 255);
  file1.AddField(plasmid_str, plasmid, hslString, 255);
  file1.SetDelimiter(hslCSVDelimited);
  if( 0 == file1.Open(worklist_file_path, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, worklist_file_path, "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    ML_STAR.Growth_Plate.SetCurrentPosition(1);
    while (
       (ML_STAR.Growth_Plate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.Growth_Plate, 1);
      loopCounter2 = loopCounter2 + 1;
      position = ML_STAR.Growth_Plate.GetCurrentPosition();
      well_id = SeqGetPositionId(ML_STAR.Growth_Plate);
      row_id = StrLeft(well_id, 1);
      column_id_str = StrMid(well_id, 1, 2);
      column_id = StrIVal(column_id_str);
      inducer_conc = SeqGetProperty(ML_STAR.Growth_Plate, position, ind_conc_str);
      left_conc = SeqGetProperty(ML_STAR.Growth_Plate, position, left_add_conc_str);
      right_conc = SeqGetProperty(ML_STAR.Growth_Plate, position, right_add_conc_str);
      strain = SeqGetProperty(ML_STAR.Growth_Plate, position, strain_str);
      plasmid = SeqGetProperty(ML_STAR.Growth_Plate, position, plasmid_str);
      if( 0 == file1.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      SeqIncrement(ML_STAR.Growth_Plate, 1);
      if (
         (ML_STAR.Growth_Plate.GetCurrentPosition() > 0 && ML_STAR.Growth_Plate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.Growth_Plate.SetMax(ML_STAR.Growth_Plate.GetTotal());
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  iniDir = HSLExtensions::File::GetDirectoryName(worklist_file_path);
  iniFilePath = iniDir + "\\schema.ini";
  iniExists = HSLExtensions::File::Exists(iniFilePath);
  if (iniExists == 1)
  {
    HSLExtensions::File::Delete(iniFilePath);
  }
}

private function GetParams(  ) void {
  private variable param_dict;
  private variable loc;
  private variable read_line;
  private file file1;
  private variable split_line[];
  private variable inducer_conc_str;
  param_dict = "param_dict";
  HSLExtensions::Dictionary::CreateDictionary(param_dict, 2);
  file1.AddField(1, read_line, hslString);
  file1.SetDelimiter(hslAsciiText);
  if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    while (
       (file1.Eof() == 0)
    )
    {
      loopCounter2 = loopCounter2 + 1;
      if( 0 == file1.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      loc = StrFind(read_line, ",");
      if (loc > 0)
      {
        split_line = HSLExtensions::String::Split(read_line, Translate(","), 1);
        HSLExtensions::Dictionary::AddItem(param_dict, split_line.ElementAt( 1 -1), split_line.ElementAt( 2 -1));
      }
    }
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  worklist_file_path = HSLExtensions::Dictionary::GetItem(param_dict, Translate("worklistFile"));
  strain_1_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("strain1"));
  plasmid_1_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("plasmid1"));
  inducer_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer"));
  inducer_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducerStockConc"));
  inducer_stock_concentration = StrFVal(inducer_conc_str);
  inducer_units = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducerStockUnits"));
  additive_left_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("leftAdditive"));
  left_add_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("leftAdditiveStockConc"));
  additive_left_concentration = StrFVal(left_add_conc_str);
  additive_left_units = HSLExtensions::Dictionary::GetItem(param_dict, Translate("leftAdditiveStockUnits"));
  additive_right_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("rightAdditive"));
  right_add_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("rightAdditiveStockConc"));
  additive_right_concentration = StrFVal(right_add_conc_str);
  additive_right_units = HSLExtensions::Dictionary::GetItem(param_dict, Translate("rightAdditiveStockUnits"));
  Bacteria_now = HSLExtensions::Dictionary::GetItem(param_dict, Translate("bacteriaNow"));
}
