private function CleanUp(  ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
}

private function StartUp(  ) void {
  tip_counter_1000_channels = Translate("Tips_for_channels_1000");
  tip_counter_300_channels = Translate("Tips_for_channels_300");
  TipCount::Read2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, tip_counter_1000_channels, ML_STAR);
  TipCount::Read2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, tip_counter_300_channels, ML_STAR);
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
}

private function CleanUp(  ) void {
  TipCount::Write2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, tip_counter_1000_channels, ML_STAR);
  TipCount::Write2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, tip_counter_300_channels, ML_STAR);
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR);
}
