private function CleanUp(  ) void ;
private function PipetteMove01(  ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  MECC::TraceComment(Translate("************************************************\nRunning OnAbort()\n************************************************"));
  CleanUp();
}

private function StartUp(  ) void {
  private sequence tip_seq_arr[];
  private variable array_length;
  TIP_HANDLING_WITH_96_HEAD::GetTipCounters(tip_counter_array, 1);
  tip_seq_arr.SetSize(0);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_300_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_50_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Offset_pickup);
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 4)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
}

private function CleanUp(  ) void {
  private variable array_length;
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        TipCount::Write2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        TipCount::Write2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        TipCount::Write2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 4)
      {
        TipCount::Write2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR);
}

private function PipetteMove01(  ) void {
  private variable pipette_volume_3;
  private variable repipette_volume;
  private variable pipette_volume_2;
  MECC::TraceComment(Translate("************************************************\nRunning PipetteMove01(): remove supernatant\n************************************************"));
  PLATEANDLIDMOVEMENT::MoveLidNoTap(ML_STAR.Spin_Plate_lid, ML_STAR.Spin_Plate_lid_parking, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
  MECC::TraceComment(Translate("************************************************************************************************\nRemove supernatant from Spin plate and throw away (in adjacent wells in Spin Plate)\n\n************************************************************************************************"));
  pipette_volume_1 = 1000;
  culture_volume = 500;
  pipette_volume_2 = culture_volume * 3.6;
  pipette_volume_3 = pipette_volume_2 - pipette_volume_1;
  TrcTrace("pipette_volume_1: ", pipette_volume_1);
  TrcTrace("pipette_volume_3: ", pipette_volume_3);
  repipette_volume = 200;
  {
    loopCounter1 = 0;
    while (
       (ML_STAR.Spin_Plate_liquid_waste.GetCurrentPosition() > 0)
    && (ML_STAR.Spin_Plate_supernatant.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.Spin_Plate_liquid_waste, 1, ML_STAR.Spin_Plate_supernatant, 1);
      loopCounter1 = loopCounter1 + 1;
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", 0);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
      PTL::SetTipHandlingState("TipCountingIdentifier", "");
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupChannelVariable", "");
      PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
      if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_1000_Channels) )
      {
            PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectChannelVariable", "");
      if( 0 == PTL::TipEject(ML_STAR) )
      {
            PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
      if (
         (ML_STAR.Spin_Plate_liquid_waste.GetCurrentPosition() > 0 && ML_STAR.Spin_Plate_liquid_waste.GetMax() == 0 )
      && (ML_STAR.Spin_Plate_supernatant.GetCurrentPosition() > 0 && ML_STAR.Spin_Plate_supernatant.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.Spin_Plate_liquid_waste.SetMax(ML_STAR.Spin_Plate_liquid_waste.GetTotal());
    ML_STAR.Spin_Plate_supernatant.SetMax(ML_STAR.Spin_Plate_supernatant.GetTotal());
    ML_STAR.Spin_Plate_liquid_waste.SetCurrentPosition(1);
    ML_STAR.Spin_Plate_supernatant.SetCurrentPosition(1);
  }
  PLATEANDLIDMOVEMENT::MoveLidNoTap(ML_STAR.Spin_Plate_lid_parking, ML_STAR.Spin_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
}
