 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
 namespace _Method { #include "HSLUtilLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Directory.hsl" }
 namespace _Method { #include "HSLTimLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "HSLErrLib.hsl" }
#include "Cytometry for 24 constitutive plasmids.res"
variable tip_counter_array[];
variable is_pipetting;
variable culture_volume;
variable mix_volume;
variable pipette_volume;
variable pipette_multiplier;
variable is_debugging;
dialog dialogHandle_1;
variable dilution_factor;
variable keep_old_GP;
variable lineage;
sequence old_GP_lid_arr[];
global device ML_STAR ("Cytometry for 24 constitutive plasmids.lay", "ML_STAR", hslTrue);
variable loopCounter1;
variable channel_pattern;
variable numberOfPlasmids;
sequence tip_seq_arr[];
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    GetParams();
    StartUp();
    old_GP_lid_arr.SetSize(0);
    old_GP_lid_arr.AddAsLast(ML_STAR.Lid_parking_Old_Growth_Plate);
    old_GP_lid_arr.AddAsLast(ML_STAR.Lid_parking_Old_Growth_Plate_2);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nPipette cells from old growth plate (on handoff) to new growth plate\n=============================================================="));
    pipette_multiplier = culture_volume / (500 * 1.0);
    pipette_volume = culture_volume / (dilution_factor * 1.0);
    mix_volume = pipette_multiplier * 200;
    channel_pattern = "01111110";
    ML_STAR.Old_GP_cells.SetCount(numberOfPlasmids);
    if (is_pipetting == "true")
    {
      {
        loopCounter1 = 0;
        while (
           (ML_STAR.Old_GP_cells.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.Bacteria_dispense, 1, ML_STAR.Old_GP_cells, 1);
          loopCounter1 = loopCounter1 + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (ML_STAR.Old_GP_cells.GetCurrentPosition() > 0 && ML_STAR.Old_GP_cells.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.Bacteria_dispense.SetMax(ML_STAR.Bacteria_dispense.GetTotal());
        ML_STAR.Old_GP_cells.SetMax(ML_STAR.Old_GP_cells.GetTotal());
        ML_STAR.Bacteria_dispense.SetCurrentPosition(1);
        ML_STAR.Old_GP_cells.SetCurrentPosition(1);
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_1.SetOutput(Translate("Pipette cells from old growth plate (on handoff) to new growth plate"), "\n");
        dialogHandle_1.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(old_GP_lid_arr.ElementAt( lineage -1), ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    if (keep_old_GP == "true")
    {
      PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Old_Growth_Plate_park, ML_STAR.Old_Growth_Plate_parking_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    }
    else
    {
      PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLidNoTap(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Growth_Plate_waste, ML_STAR.Growth_Plate_waste_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    }
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_Handoff_lid, old_GP_lid_arr.ElementAt( lineage -1), ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
  } }
