 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLExtensions\\Sequence.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
#include "Cytometry for 6 variants.res"
variable inducer_stock_concentration;
variable inducer_id;
variable inducer_units;
variable worklist_file_path;
variable strain_1_id;
variable strain_str;
variable plasmid_str;
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable culture_volume;
variable pipette_volume;
variable mix_volume;
variable is_debugging;
dialog dialogHandle_1;
dialog dialogHandle_2;
dialog dialogHandle_3;
variable dilution_factor;
variable media_volume;
variable cell_volume;
variable grad_start_volume;
variable inducer_volume;
variable grad_start_media_volume;
variable additive_stock_concentration;
variable additive_id;
variable additive_units;
sequence Inducer_grad_start_arr[];
sequence Inducer_dil_to_arr[];
sequence Inducer_dil_from_arr[];
variable sequence_number;
variable pipette_multiplier;
variable grad_start_volume_cells;
global device ML_STAR ("Cytometry for 6 variants.lay", "ML_STAR", hslTrue);
variable plasmid_C_id;
variable plasmid_B_id;
variable plasmid_G_id;
variable plasmid_F_id;
variable plasmid_E_id;
variable plasmid_D_id;
variable grad_plate_number;
variable lineage;
sequence old_GP_lid_arr[];
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("==============================================================\nThis method used for preparing plate 2, with inducer gradient but no selector\n\nIt uses 16 1000 uL tips and 8 300 uL tips\nand 1.2 mL of inducer stock\n=============================================================="));
    GetParams();
    StartUp();
    old_GP_lid_arr.SetSize(0);
    old_GP_lid_arr.AddAsLast(ML_STAR.Lid_parking_Old_Growth_Plate);
    old_GP_lid_arr.AddAsLast(ML_STAR.Lid_parking_Old_Growth_Plate_2);
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.ABGene_plate_0002_lid, ML_STAR.Lid_parking_ABGene_plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_source_lid, ML_STAR.Lid_parking_Media_trough, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    Inducer_grad_start_arr.SetSize(0);
    Inducer_grad_start_arr.AddAsLast(ML_STAR.Inducer_grad_start_1);
    Inducer_grad_start_arr.AddAsLast(ML_STAR.Inducer_grad_start_2);
    Inducer_grad_start_arr.AddAsLast(ML_STAR.Inducer_grad_start_3);
    Inducer_grad_start_arr.AddAsLast(ML_STAR.Inducer_grad_start_4);
    Inducer_dil_to_arr.SetSize(0);
    Inducer_dil_to_arr.AddAsLast(ML_STAR.Inducer_dil_to_1);
    Inducer_dil_to_arr.AddAsLast(ML_STAR.Inducer_dil_to_2);
    Inducer_dil_to_arr.AddAsLast(ML_STAR.Inducer_dil_to_3);
    Inducer_dil_to_arr.AddAsLast(ML_STAR.Inducer_dil_to_4);
    Inducer_dil_from_arr.SetSize(0);
    Inducer_dil_from_arr.AddAsLast(ML_STAR.Inducer_dil_from_1);
    Inducer_dil_from_arr.AddAsLast(ML_STAR.Inducer_dil_from_2);
    Inducer_dil_from_arr.AddAsLast(ML_STAR.Inducer_dil_from_3);
    Inducer_dil_from_arr.AddAsLast(ML_STAR.Inducer_dil_from_4);
    MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate and gradient starter plate\n=============================================================="));
    pipette_multiplier = culture_volume / (500 * 1.0);
    cell_volume = culture_volume / (dilution_factor * 1.0);
    media_volume = culture_volume - cell_volume;
    grad_start_volume = culture_volume * 1.5;
    grad_start_volume_cells = grad_start_volume / (dilution_factor * 1.0);
    grad_start_media_volume = grad_start_volume - grad_start_volume_cells;
    if (grad_plate_number == 1)
    {
      inducer_volume = grad_start_volume / (5 * 1.0);
    }
    else
    {
      inducer_volume = grad_start_media_volume / (5 * 1.0);
    }
    grad_start_media_volume = grad_start_media_volume - inducer_volume;
    TrcTrace(Translate("dilution_factor: "), dilution_factor);
    TrcTrace(Translate("cell_volume: "), cell_volume);
    TrcTrace(Translate("media_volume: "), media_volume);
    if (is_pipetting == "true")
    {
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", 0);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
      PTL::SetTipHandlingState("TipCountingIdentifier", "");
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupChannelVariable", "");
      PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
      if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_1000_Channels) )
      {
            PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
      pipette_volume = media_volume;
      {
        sequence arrseqAspirate_4[];
        sequence arrseqDispense_4[];
        arrseqAspirate_4.SetSize(1);
        arrseqAspirate_4.SetAt(0, ML_STAR.Media_source);
        arrseqDispense_4.SetSize(1);
        arrseqDispense_4.SetAt(0, ML_STAR.Media_dispense);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 5);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 11);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseSubmergeDepth", 0);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
        PTL::SetPipettingState("DispenseFluidHeight", 5);
        PTL::SetPipettingState("DispenseMode", 3);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslFalse);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_4, arrseqDispense_4, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, ML_STAR.Media_dispense) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
      pipette_volume = grad_start_media_volume;
      ML_STAR.Media_source.SetCurrentPosition(1);
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectChannelVariable", "");
      if( 0 == PTL::TipEject(ML_STAR) )
      {
            PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_1.SetOutput(Translate("media into growth plate"), "\n", Translate("media into Abgene plate"), "\n");
        dialogHandle_1.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Media_trough, ML_STAR.Media_source_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nDilute inducer (e.g. IPTG) stock into IPTG_2x wells\n=============================================================="));
    if (is_pipetting == "true")
    {
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", 0);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
      PTL::SetTipHandlingState("TipCountingIdentifier", "");
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupChannelVariable", "");
      PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
      if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_300_Channels) )
      {
            PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
      {
        sequence arrseqAspirate_5[];
        sequence arrseqDispense_5[];
        Util2::SeqArrCheckIndex(Inducer_grad_start_arr, sequence_number, "Inducer_grad_start_arr");
        Util2::SeqArrCheckIndex(Inducer_grad_start_arr, sequence_number, "Inducer_grad_start_arr");
        arrseqAspirate_5.SetSize(1);
        arrseqAspirate_5.SetAt(0, ML_STAR.Inducer_10x_stock);
        arrseqDispense_5.SetSize(1);
        arrseqDispense_5.SetAt(0, Inducer_grad_start_arr.ElementAt(sequence_number-1));
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 5);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 11);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseSubmergeDepth", 2);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
        PTL::SetPipettingState("DispenseFluidHeight", 0);
        PTL::SetPipettingState("DispenseMode", 3);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_300_Channels, arrseqAspirate_5, arrseqDispense_5, 1, 1, inducer_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Inducer_10x_stock, Inducer_grad_start_arr.ElementAt(sequence_number-1)) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectChannelVariable", "");
      if( 0 == PTL::TipEject(ML_STAR) )
      {
            PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_2.SetOutput(Translate("Reagent stock plate to Abgene plate"), "\n");
        dialogHandle_2.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nPipete inducer dilution gradient\n=============================================================="));
    if (is_pipetting == "true")
    {
      pipette_volume = media_volume * 1;
      mix_volume = pipette_multiplier * 600;
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", 0);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
      PTL::SetTipHandlingState("TipCountingIdentifier", "");
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupChannelVariable", "");
      PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
      if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_1000_Channels) )
      {
            PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
      {
        sequence arrseqAspirate_6[];
        sequence arrseqDispense_6[];
        Util2::SeqArrCheckIndex(Inducer_dil_from_arr, sequence_number, "Inducer_dil_from_arr");
        Util2::SeqArrCheckIndex(Inducer_dil_from_arr, sequence_number, "Inducer_dil_from_arr");
        Util2::SeqArrCheckIndex(Inducer_dil_to_arr, sequence_number, "Inducer_dil_to_arr");
        Util2::SeqArrCheckIndex(Inducer_dil_to_arr, sequence_number, "Inducer_dil_to_arr");
        arrseqAspirate_6.SetSize(1);
        arrseqAspirate_6.SetAt(0, Inducer_dil_from_arr.ElementAt(sequence_number-1));
        arrseqDispense_6.SetSize(1);
        arrseqDispense_6.SetAt(0, Inducer_dil_to_arr.ElementAt(sequence_number-1));
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 3);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 0);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
        PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3);
        PTL::SetPipettingState("AspiratePrerinsingMixVolume", mix_volume);
        PTL::SetPipettingState("DispenseSubmergeDepth", 2);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
        PTL::SetPipettingState("DispenseFluidHeight", 0);
        PTL::SetPipettingState("DispenseMode", 3);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_6, arrseqDispense_6, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", Inducer_dil_from_arr.ElementAt(sequence_number-1), Inducer_dil_to_arr.ElementAt(sequence_number-1)) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectChannelVariable", "");
      if( 0 == PTL::TipEject(ML_STAR) )
      {
            PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_3.SetOutput(Translate("Growth plate and Abgene plate"), "\n");
        dialogHandle_3.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_ABGene_plate, ML_STAR.ABGene_plate_0002_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CalculateOutputs();
    SaveWorklistAndMetadata();
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
  } }
