 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLExtensions\\Sequence.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
 namespace _Method { #include "..\\..\\GSF-IMS.shared_submethods.hs_" }
#include "Cytometry for 6 variants.2 gradients per row.res"
variable worklist_file_path;
variable strain_1_id;
variable strain_str;
variable plasmid_str;
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable culture_volume;
variable pipette_volume;
variable mix_volume;
variable is_debugging;
dialog dialogHandle_1;
dialog dialogHandle_2;
variable dilution_factor;
variable media_volume;
variable cell_volume;
variable additive_stock_concentration;
variable additive_id;
variable additive_units;
variable sequence_number;
variable grad_plate_number;
variable lineage;
sequence old_GP_lid_arr[];
dialog dialogHandle_3;
variable inducer_max_volume;
variable dil_series_transf_vol;
variable dil_series_multiplier;
variable dil_series_factor;
variable inducer_ref_volume;
variable grad_start_media_volume;
variable inducer_2_id;
variable inducer_1_units;
variable inducer_1_id;
variable inducer_2_units;
variable inducer_2_stock_concentration;
variable inducer_1_stock_concentration;
global device ML_STAR ("Cytometry for 6 variants.2 gradients per row.lay", "ML_STAR", hslTrue);
variable plasmid_B2_id;
variable plasmid_C2_id;
variable plasmid_B1_id;
variable plasmid_D2_id;
variable plasmid_C1_id;
variable plasmid_E2_id;
variable plasmid_D1_id;
variable plasmid_F2_id;
variable plasmid_E1_id;
variable plasmid_G2_id;
variable plasmid_F1_id;
variable plasmid_G1_id;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("==============================================================\nThis method used for preparing plate 2, with inducer gradient but no selector\n\nIt uses 16 1000 uL tips and 8 300 uL tips\nand 1.2 mL of inducer stock\n=============================================================="));
    GetParams();
    StartUp();
    old_GP_lid_arr.SetSize(0);
    old_GP_lid_arr.AddAsLast(ML_STAR.Lid_parking_Old_Growth_Plate);
    old_GP_lid_arr.AddAsLast(ML_STAR.Lid_parking_Old_Growth_Plate_2);
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_source_lid, ML_STAR.Lid_parking_Media_trough, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    dil_series_multiplier = dil_series_factor - 1.0;
    dil_series_multiplier = dil_series_factor / (dil_series_multiplier * 1.0);
    cell_volume = culture_volume / (dilution_factor * 1.0);
    media_volume = culture_volume - cell_volume;
    dil_series_transf_vol = media_volume * dil_series_multiplier;
    dil_series_transf_vol = dil_series_transf_vol - media_volume;
    if (grad_plate_number == 1)
    {
      inducer_ref_volume = culture_volume;
    }
    else
    {
      inducer_ref_volume = media_volume;
    }
    inducer_max_volume = inducer_ref_volume / (2 * 1.0);
    inducer_max_volume = inducer_max_volume * dil_series_multiplier;
    grad_start_media_volume = media_volume * dil_series_multiplier;
    grad_start_media_volume = grad_start_media_volume - inducer_max_volume;
    TrcTrace(Translate("dil_series_factor: "), dil_series_factor);
    TrcTrace(Translate("dilution_factor: "), dilution_factor);
    TrcTrace(Translate("cell_volume: "), cell_volume);
    TrcTrace(Translate("media_volume: "), media_volume);
    TrcTrace(Translate("dil_series_transf_vol: "), dil_series_transf_vol);
    TrcTrace(Translate("grad_plate_number: "), grad_plate_number);
    MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate and gradient starter plate\n=============================================================="));
    if (is_pipetting == "true")
    {
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", 0);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
      PTL::SetTipHandlingState("TipCountingIdentifier", "");
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupChannelVariable", "");
      PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
      if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_1000_Channels) )
      {
            PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
      pipette_volume = media_volume;
      pipette_media(ML_STAR.inducer_zero_at_start, pipette_volume, 1);
      MECC::TraceComment(Translate("****\nIn this method, starting inducer stock is only added to rows B-G; Rows A and H get plain media\n****"));
      ML_STAR.Media_pipette_from.SetCurrentPosition(1);
      pipette_volume = grad_start_media_volume;
      pipette_media(ML_STAR.Inducer_1_grad_start, pipette_volume, 0);
      pipette_media(ML_STAR.Inducer_2_grad_start, pipette_volume, 0);
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectChannelVariable", "");
      if( 0 == PTL::TipEject(ML_STAR) )
      {
            PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_1.SetOutput(Translate("media into growth plate"), "\n", Translate("media into Abgene plate"), "\n");
        dialogHandle_1.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Media_trough, ML_STAR.Media_source_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nPipette inducers into wells with max inducer\n=============================================================="));
    if (is_pipetting == "true")
    {
      MECC::TraceComment(Translate("********** Inducer 1"));
      pipette_inducer(ML_STAR.Inducer_1_stock, ML_STAR.Inducer_1_grad_start, inducer_max_volume, 0);
      MECC::TraceComment(Translate("********** Inducer 1 (again)"));
      pipette_inducer(ML_STAR.Inducer_1_stock, ML_STAR.Inducer_2_grad_start, inducer_max_volume, 0);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_3.SetOutput(Translate("Reagent stock plate to Abgene plate"), "\n");
        dialogHandle_3.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nPipete inducer dilution gradient\n=============================================================="));
    if (is_pipetting == "true")
    {
      pipette_volume = dil_series_transf_vol;
      mix_volume = media_volume * 1;
      MECC::TraceComment(Translate("********** Inducer 1"));
      pipette_dil_series(ML_STAR.Inducer_1_dil_from, ML_STAR.Inducer_1_dil_to, pipette_volume, mix_volume, 6);
      MECC::TraceComment(Translate("********** Inducer 2"));
      pipette_dil_series(ML_STAR.Inducer_2_dil_from, ML_STAR.Inducer_2_dil_to, pipette_volume, mix_volume, 6);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_2.SetOutput(Translate("Growth plate and Abgene plate"), "\n");
        dialogHandle_2.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CalculateOutputs();
    SaveWorklistAndMetadata();
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_ExitLibrary();
  } }
