private function CalculateOutputs(  ) void ;
private function CleanUp(  ) void ;
private function GetParams(  ) void ;
private function SaveWorklistAndMetadata(  ) void ;
private function StartUp(  ) void ;
private function pipette_dil_series( sequence & from_seq, sequence & to_seq, variable p_vol, variable m_vol, variable number_channels ) void ;
private function pipette_inducer( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable disp_to_empty ) void ;
private function pipette_media( sequence & disp_seq, variable p_vol, variable pre_wet_tips ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function CleanUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        TipCount::Write2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        TipCount::Write2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        TipCount::Write2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 4)
      {
        TipCount::Write2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR, ML_STAR.clear_96_head_seq);
}

private function StartUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  TIP_HANDLING_WITH_96_HEAD::GetTipCounters(tip_counter_array, 1);
  tip_seq_arr.SetSize(0);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_300_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_50_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Offset_pickup);
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 4)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
}

private function CalculateOutputs(  ) void {
  private variable inducer_conc;
  private variable well_id;
  private variable labware_id;
  private variable loopCounter3;
  private variable loopCounter2;
  private variable prop_arr[];
  private variable inducer_conc_1;
  private variable inducer_conc_2;
  private variable inducer_conc_3;
  private variable loopCounter1;
  private variable inducer_4_1_id;
  private variable inducer_4_2_id;
  private variable inducer_4_1_units;
  private variable inducer_4_2_units;
  private variable inducer_conc_4_1;
  private variable inducer_conc_4_2;
  private variable start_devisor;
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "inducer_conc", 0);
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "inducer_id", Translate("none"));
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "inducer_units", Translate("N/A"));
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "additive_conc", 0);
  labware_id = "";
  well_id = "";
  if (gradStartFullConc == 1)
  {
    start_devisor = 1;
  }
  else
  {
    start_devisor = 2;
  }
  if (pipetteThreeLigands >= 1)
  {
    inducer_conc_1 = inducer_1_stock_concentration / (2 * 1.0);
    inducer_conc_2 = inducer_2_stock_concentration / (2 * 1.0);
    inducer_conc_3 = inducer_3_stock_concentration / (2 * 1.0);
    {
      loopCounter1 = 0;
      ML_STAR.inducer_1_props.SetCurrentPosition(1);
      ML_STAR.inducer_2_props.SetCurrentPosition(1);
      ML_STAR.inducer_3_props.SetCurrentPosition(1);
      while (
         (ML_STAR.inducer_1_props.GetCurrentPosition() > 0)
      && (ML_STAR.inducer_2_props.GetCurrentPosition() > 0)
      && (ML_STAR.inducer_3_props.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.inducer_1_props, 1, ML_STAR.inducer_2_props, 1, ML_STAR.inducer_3_props, 1);
        loopCounter1 = loopCounter1 + 1;
        {
          for(loopCounter3 = 0; loopCounter3 < 2;)
          {
            loopCounter3 = loopCounter3 + 1;
            labware_id = SeqGetLabwareId(ML_STAR.inducer_1_props);
            well_id = SeqGetPositionId(ML_STAR.inducer_1_props);
            LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, Translate("inducer_id"), inducer_1_id);
            LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, Translate("inducer_conc"), inducer_conc_1);
            LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, Translate("inducer_units"), inducer_1_units);
            SeqIncrement(ML_STAR.inducer_1_props, 1);
            labware_id = SeqGetLabwareId(ML_STAR.inducer_2_props);
            well_id = SeqGetPositionId(ML_STAR.inducer_2_props);
            LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, Translate("inducer_id"), inducer_2_id);
            LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, Translate("inducer_conc"), inducer_conc_2);
            LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, Translate("inducer_units"), inducer_2_units);
            SeqIncrement(ML_STAR.inducer_2_props, 1);
            labware_id = SeqGetLabwareId(ML_STAR.inducer_3_props);
            well_id = SeqGetPositionId(ML_STAR.inducer_3_props);
            LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, Translate("inducer_id"), inducer_3_id);
            LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, Translate("inducer_conc"), inducer_conc_3);
            LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, Translate("inducer_units"), inducer_3_units);
            SeqIncrement(ML_STAR.inducer_3_props, 1);
          }
        }
        inducer_conc_1 = inducer_conc_1 / (2 * 1.0);
        inducer_conc_2 = inducer_conc_2 / (2 * 1.0);
        inducer_conc_3 = inducer_conc_3 / (2 * 1.0);
        if (
           (ML_STAR.inducer_1_props.GetCurrentPosition() > 0 && ML_STAR.inducer_1_props.GetMax() == 0 )
        && (ML_STAR.inducer_2_props.GetCurrentPosition() > 0 && ML_STAR.inducer_2_props.GetMax() == 0 )
        && (ML_STAR.inducer_3_props.GetCurrentPosition() > 0 && ML_STAR.inducer_3_props.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.inducer_1_props.SetMax(ML_STAR.inducer_1_props.GetTotal());
      ML_STAR.inducer_2_props.SetMax(ML_STAR.inducer_2_props.GetTotal());
      ML_STAR.inducer_3_props.SetMax(ML_STAR.inducer_3_props.GetTotal());
    }
  }
  else
  {
    if (twelveStrainsFourLigands == 1)
    {
      if (lineage == 1)
      {
        inducer_4_1_id = inducer_1_id;
        inducer_4_1_units = inducer_1_units;
        inducer_conc_4_1 = inducer_1_stock_concentration / (start_devisor * 1.0);
        inducer_4_2_id = inducer_2_id;
        inducer_4_2_units = inducer_2_units;
        inducer_conc_4_2 = inducer_2_stock_concentration / (start_devisor * 1.0);
      }
      else
      {
        inducer_4_1_id = inducer_3_id;
        inducer_4_1_units = inducer_3_units;
        inducer_conc_4_1 = inducer_3_stock_concentration / (start_devisor * 1.0);
        inducer_4_2_id = inducer_4_id;
        inducer_4_2_units = inducer_4_units;
        inducer_conc_4_2 = inducer_4_stock_concentration / (start_devisor * 1.0);
      }
      {
        loopCounter1 = 0;
        ML_STAR.inducer_4_1_props.SetCurrentPosition(1);
        ML_STAR.inducer_4_2_props.SetCurrentPosition(1);
        while (
           (ML_STAR.inducer_4_1_props.GetCurrentPosition() > 0)
        && (ML_STAR.inducer_4_2_props.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.inducer_4_1_props, 1, ML_STAR.inducer_4_2_props, 1);
          loopCounter1 = loopCounter1 + 1;
          {
            for(loopCounter3 = 0; loopCounter3 < 3;)
            {
              loopCounter3 = loopCounter3 + 1;
              labware_id = SeqGetLabwareId(ML_STAR.inducer_4_1_props);
              well_id = SeqGetPositionId(ML_STAR.inducer_4_1_props);
              LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, Translate("inducer_id"), inducer_4_1_id);
              LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, Translate("inducer_conc"), inducer_conc_4_1);
              LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, Translate("inducer_units"), inducer_4_1_units);
              SeqIncrement(ML_STAR.inducer_4_1_props, 1);
              labware_id = SeqGetLabwareId(ML_STAR.inducer_4_2_props);
              well_id = SeqGetPositionId(ML_STAR.inducer_4_2_props);
              LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, Translate("inducer_id"), inducer_4_2_id);
              LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, Translate("inducer_conc"), inducer_conc_4_2);
              LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, Translate("inducer_units"), inducer_4_2_units);
              SeqIncrement(ML_STAR.inducer_4_2_props, 1);
            }
          }
          inducer_conc_4_1 = inducer_conc_4_1 / (2 * 1.0);
          inducer_conc_4_2 = inducer_conc_4_2 / (2 * 1.0);
          if (
             (ML_STAR.inducer_4_1_props.GetCurrentPosition() > 0 && ML_STAR.inducer_4_1_props.GetMax() == 0 )
          && (ML_STAR.inducer_4_2_props.GetCurrentPosition() > 0 && ML_STAR.inducer_4_2_props.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.inducer_4_1_props.SetMax(ML_STAR.inducer_4_1_props.GetTotal());
        ML_STAR.inducer_4_2_props.SetMax(ML_STAR.inducer_4_2_props.GetTotal());
      }
    }
    else
    {
      inducer_conc = inducer_stock_concentration / (2 * 1.0);
      {
        loopCounter2 = 0;
        ML_STAR.Inducer_dil.SetCurrentPosition(1);
        while (
           (ML_STAR.Inducer_dil.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.Inducer_dil, 1);
          loopCounter2 = loopCounter2 + 1;
          {
            for(loopCounter3 = 0; loopCounter3 < 8;)
            {
              loopCounter3 = loopCounter3 + 1;
              labware_id = SeqGetLabwareId(ML_STAR.Inducer_dil);
              well_id = SeqGetPositionId(ML_STAR.Inducer_dil);
              LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, Translate("inducer_conc"), inducer_conc);
              SeqIncrement(ML_STAR.Inducer_dil, 1);
            }
          }
          inducer_conc = inducer_conc / (2 * 1.0);
          if (
             (ML_STAR.Inducer_dil.GetCurrentPosition() > 0 && ML_STAR.Inducer_dil.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.Inducer_dil.SetMax(ML_STAR.Inducer_dil.GetTotal());
      }
    }
  }
  strain_str = "strain";
  plasmid_str = "plasmid";
  SeqSetPropertyRange(ML_STAR.strain_blank, 1, 24, strain_str, Translate("none"));
  SeqSetPropertyRange(ML_STAR.strain_blank, 1, 24, plasmid_str, Translate("none"));
  SeqSetPropertyRange(ML_STAR.plasmid_B, 1, 12, plasmid_str, plasmid_B_id);
  SeqSetPropertyRange(ML_STAR.plasmid_C, 1, 12, plasmid_str, plasmid_C_id);
  SeqSetPropertyRange(ML_STAR.plasmid_D, 1, 12, plasmid_str, plasmid_D_id);
  SeqSetPropertyRange(ML_STAR.plasmid_E, 1, 12, plasmid_str, plasmid_E_id);
  SeqSetPropertyRange(ML_STAR.plasmid_F, 1, 12, plasmid_str, plasmid_F_id);
  SeqSetPropertyRange(ML_STAR.plasmid_G, 1, 12, plasmid_str, plasmid_G_id);
  SeqSetPropertyRange(ML_STAR.plasmid_B, 1, 12, strain_str, strain_1_id);
  SeqSetPropertyRange(ML_STAR.plasmid_C, 1, 12, strain_str, strain_1_id);
  SeqSetPropertyRange(ML_STAR.plasmid_D, 1, 12, strain_str, strain_1_id);
  SeqSetPropertyRange(ML_STAR.plasmid_E, 1, 12, strain_str, strain_1_id);
  SeqSetPropertyRange(ML_STAR.plasmid_F, 1, 12, strain_str, strain_1_id);
  SeqSetPropertyRange(ML_STAR.plasmid_G, 1, 12, strain_str, strain_1_id);
  prop_arr.SetSize(0);
  prop_arr.AddAsLast(strain_str);
  prop_arr.AddAsLast(plasmid_str);
  LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.strain_blank, prop_arr, ML_STAR.Growth_Plate);
  LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.plasmid_B, prop_arr, ML_STAR.Growth_Plate);
  LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.plasmid_C, prop_arr, ML_STAR.Growth_Plate);
  LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.plasmid_D, prop_arr, ML_STAR.Growth_Plate);
  LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.plasmid_E, prop_arr, ML_STAR.Growth_Plate);
  LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.plasmid_F, prop_arr, ML_STAR.Growth_Plate);
  LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.plasmid_G, prop_arr, ML_STAR.Growth_Plate);
}

private function SaveWorklistAndMetadata(  ) void {
  private variable inducer_conc;
  private variable row_id;
  private variable well_id;
  private variable plasmid;
  private variable strain;
  private variable position;
  private variable column_id;
  private variable column_id_str;
  private file file1;
  private variable iniFilePath;
  private variable iniDir;
  private variable iniExists;
  private variable loopCounter2;
  private variable additive_conc;
  private variable inducer_id_out;
  private variable inducer_units_out;
  file1.AddField("position", position, hslInteger);
  file1.AddField("well", well_id, hslString, 255);
  file1.AddField("row", row_id, hslString, 255);
  file1.AddField("column", column_id, hslInteger);
  file1.AddField("inducerId", inducer_id_out, hslString, 255);
  file1.AddField("inducerConcentration", inducer_conc, hslFloat);
  file1.AddField("inducerUnits", inducer_units_out, hslString, 255);
  file1.AddField("selectorId", additive_id, hslString, 255);
  file1.AddField("selectorConc", additive_conc, hslString, 255);
  file1.AddField("selectorUnits", additive_units, hslString, 255);
  file1.AddField(strain_str, strain, hslString, 255);
  file1.AddField(plasmid_str, plasmid, hslString, 255);
  file1.SetDelimiter(hslCSVDelimited);
  if( 0 == file1.Open(worklist_file_path, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, worklist_file_path, "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    ML_STAR.Growth_Plate.SetCurrentPosition(1);
    while (
       (ML_STAR.Growth_Plate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.Growth_Plate, 1);
      loopCounter2 = loopCounter2 + 1;
      position = ML_STAR.Growth_Plate.GetCurrentPosition();
      well_id = SeqGetPositionId(ML_STAR.Growth_Plate);
      row_id = StrLeft(well_id, 1);
      column_id_str = StrMid(well_id, 1, 2);
      column_id = StrIVal(column_id_str);
      if (pipetteThreeLigands >= 1)
      {
        inducer_id_out = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("inducer_id"));
        inducer_units_out = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("inducer_units"));
      }
      else
      {
        if (twelveStrainsFourLigands == 1)
        {
          inducer_id_out = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("inducer_id"));
          inducer_units_out = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("inducer_units"));
        }
        else
        {
          inducer_id_out = inducer_id;
          inducer_units_out = inducer_units;
        }
      }
      inducer_conc = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("inducer_conc"));
      additive_conc = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("additive_conc"));
      strain = SeqGetProperty(ML_STAR.Growth_Plate, position, strain_str);
      plasmid = SeqGetProperty(ML_STAR.Growth_Plate, position, plasmid_str);
      if( 0 == file1.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      SeqIncrement(ML_STAR.Growth_Plate, 1);
      if (
         (ML_STAR.Growth_Plate.GetCurrentPosition() > 0 && ML_STAR.Growth_Plate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.Growth_Plate.SetMax(ML_STAR.Growth_Plate.GetTotal());
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  iniDir = HSLExtensions::File::GetDirectoryName(worklist_file_path);
  iniFilePath = iniDir + "\\schema.ini";
  iniExists = HSLExtensions::File::Exists(iniFilePath);
  if (iniExists == 1)
  {
    HSLExtensions::File::Delete(iniFilePath);
  }
}

private function GetParams(  ) void {
  private variable param_dict;
  private variable loc;
  private variable read_line;
  private file file1;
  private variable split_line[];
  private variable inducer_conc_str;
  private variable loopCounter2;
  private variable culture_volume_str;
  private variable dilution_factor_str;
  private variable grad_plate_num_str;
  private variable sequence_num_str;
  private variable lineage_str;
  private variable key_exists;
  private variable three_lig_str;
  private variable four_lig_str;
  private variable full_conc_str;
  private variable twelveStrainsThreeLigands;
  param_dict = "param_dict";
  HSLExtensions::Dictionary::CreateDictionary(param_dict, 2);
  file1.AddField(1, read_line, hslString);
  file1.SetDelimiter(hslAsciiText);
  if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    while (
       (file1.Eof() == 0)
    )
    {
      loopCounter2 = loopCounter2 + 1;
      if( 0 == file1.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      loc = StrFind(read_line, ",");
      if (loc > 0)
      {
        split_line = HSLExtensions::String::Split(read_line, Translate(","), 1);
        HSLExtensions::Dictionary::AddItem(param_dict, split_line.ElementAt( 1 -1), split_line.ElementAt( 2 -1));
      }
    }
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  worklist_file_path = HSLExtensions::Dictionary::GetItem(param_dict, Translate("worklistFile"));
  strain_1_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("strain1"));
  plasmid_B_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("plasmidB"));
  plasmid_C_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("plasmidC"));
  plasmid_D_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("plasmidD"));
  plasmid_E_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("plasmidE"));
  plasmid_F_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("plasmidF"));
  plasmid_G_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("plasmidG"));
  key_exists = HSLExtensions::Dictionary::ExistsItem(param_dict, "inducer");
  if (key_exists == 1)
  {
    inducer_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer"));
    inducer_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducerStockConc"));
    inducer_stock_concentration = StrFVal(inducer_conc_str);
    inducer_units = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducerStockUnits"));
  }
  else
  {
    inducer_id = Translate("none");
    inducer_stock_concentration = 0;
    inducer_units = Translate("none");
  }
  additive_id = Translate("none");
  additive_stock_concentration = 0;
  additive_units = Translate("none");
  is_pipetting = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isPipetting"));
  is_debugging = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isDebugging"));
  culture_volume_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("cultureVolume"));
  culture_volume = StrFVal(culture_volume_str);
  if (culture_volume > 500)
  {
    culture_volume = 500;
  }
  else
  {
    if (culture_volume < 200)
    {
      culture_volume = 200;
    }
  }
  dilution_factor_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("dilutionFactor"));
  dilution_factor = StrFVal(dilution_factor_str);
  grad_plate_num_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("gradPlateNum"));
  grad_plate_number = StrIVal(grad_plate_num_str);
  sequence_num_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("sequenceNum"));
  sequence_number = StrIVal(sequence_num_str);
  key_exists = HSLExtensions::Dictionary::ExistsItem(param_dict, "lineage");
  if (key_exists == 1)
  {
    lineage_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("lineage"));
    lineage = StrIVal(lineage_str);
  }
  else
  {
    lineage = 1;
  }
  key_exists = HSLExtensions::Dictionary::ExistsItem(param_dict, "inducer2");
  if (key_exists == 1)
  {
    inducer_number = lineage;
    if (inducer_number == 2)
    {
      inducer_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer2"));
      inducer_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer2StockConc"));
      inducer_stock_concentration = StrFVal(inducer_conc_str);
      inducer_units = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer2StockUnits"));
    }
  }
  else
  {
    inducer_number = 1;
  }
  key_exists = HSLExtensions::Dictionary::ExistsItem(param_dict, "twoStrainsThreeLigands");
  if (key_exists == 1)
  {
    three_lig_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("twoStrainsThreeLigands"));
    if (three_lig_str == "True")
    {
      twoStrainsThreeLigands = 1;
    }
    else
    {
      twoStrainsThreeLigands = 0;
    }
  }
  else
  {
    twoStrainsThreeLigands = 0;
  }
  key_exists = HSLExtensions::Dictionary::ExistsItem(param_dict, "twelveStrainsThreeLigands");
  if (key_exists == 1)
  {
    three_lig_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("twelveStrainsThreeLigands"));
    if (three_lig_str == "True")
    {
      twelveStrainsThreeLigands = 1;
    }
    else
    {
      twelveStrainsThreeLigands = 0;
    }
  }
  else
  {
    twelveStrainsThreeLigands = 0;
  }
  pipetteThreeLigands = twoStrainsThreeLigands + twelveStrainsThreeLigands;
  if (pipetteThreeLigands >= 1)
  {
    inducer_1_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer1"));
    inducer_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer1StockConc"));
    inducer_1_stock_concentration = StrFVal(inducer_conc_str);
    inducer_1_units = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer1StockUnits"));
    inducer_2_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer2"));
    inducer_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer2StockConc"));
    inducer_2_stock_concentration = StrFVal(inducer_conc_str);
    inducer_2_units = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer2StockUnits"));
    inducer_3_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer3"));
    inducer_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer3StockConc"));
    inducer_3_stock_concentration = StrFVal(inducer_conc_str);
    inducer_3_units = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer3StockUnits"));
  }
  key_exists = HSLExtensions::Dictionary::ExistsItem(param_dict, "twelveStrainsFourLigands");
  if (key_exists == 1)
  {
    four_lig_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("twelveStrainsFourLigands"));
    if (four_lig_str == "True")
    {
      twelveStrainsFourLigands = 1;
    }
    else
    {
      twelveStrainsFourLigands = 0;
    }
  }
  else
  {
    twelveStrainsFourLigands = 0;
  }
  if (twelveStrainsFourLigands == 1)
  {
    inducer_1_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer1"));
    inducer_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer1StockConc"));
    inducer_1_stock_concentration = StrFVal(inducer_conc_str);
    inducer_1_units = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer1StockUnits"));
    inducer_2_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer2"));
    inducer_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer2StockConc"));
    inducer_2_stock_concentration = StrFVal(inducer_conc_str);
    inducer_2_units = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer2StockUnits"));
    inducer_3_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer3"));
    inducer_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer3StockConc"));
    inducer_3_stock_concentration = StrFVal(inducer_conc_str);
    inducer_3_units = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer3StockUnits"));
    inducer_4_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer4"));
    inducer_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer4StockConc"));
    inducer_4_stock_concentration = StrFVal(inducer_conc_str);
    inducer_4_units = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer4StockUnits"));
  }
  key_exists = HSLExtensions::Dictionary::ExistsItem(param_dict, "gradStartFullConc");
  if (key_exists == 1)
  {
    full_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("gradStartFullConc"));
    if (full_conc_str == "True")
    {
      gradStartFullConc = 1;
    }
    else
    {
      gradStartFullConc = 0;
    }
  }
  else
  {
    gradStartFullConc = 0;
  }
}

private function pipette_dil_series( sequence & from_seq, sequence & to_seq, variable p_vol, variable m_vol, variable number_channels ) void {
  GSF_IMS_SHARED_SUBMETHODS::pipette_dil_series(from_seq, to_seq, p_vol, m_vol, number_channels, ML_STAR, ML_STAR.Tips_1000_Channels);
}

private function pipette_inducer( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable disp_to_empty ) void {
  TrcTrace(Translate("pipetting inducer volume: "), p_vol);
  if (disp_to_empty == 0)
  {
    GSF_IMS_SHARED_SUBMETHODS::pipette_inducer(asp_seq, disp_seq, p_vol, ML_STAR, ML_STAR.Tips_300_Channels);
  }
  else
  {
    PTL::ResetTipHandlingState();
    PTL::SetTipHandlingState("UserResponseTime", 0);
    PTL::SetTipHandlingState("ErrorHandling", 3);
    PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
    PTL::SetTipHandlingState("TipCountingIdentifier", "");
    PTL::SetTipHandlingState("InitializeCustomStepID", 0);
    PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
    PTL::SetTipHandlingState("TipPickupChannelVariable", "");
    PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
    PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
    if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_1000_Channels) )
    {
          PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    GSF_IMS_SHARED_SUBMETHODS::pipette_media(asp_seq, disp_seq, p_vol, 2, asp_seq, asp_seq, ML_STAR, ML_STAR.Tips_1000_Channels);
    PTL::ResetTipHandlingState();
    PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
    PTL::SetTipHandlingState("ErrorHandling", 3);
    PTL::SetTipHandlingState("InitializeCustomStepID", 0);
    PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
    PTL::SetTipHandlingState("TipEjectChannelVariable", "");
    if( 0 == PTL::TipEject(ML_STAR) )
    {
          PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
  }
}

private function pipette_media( sequence & disp_seq, variable p_vol, variable pre_wet_tips ) void {
  GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from, disp_seq, p_vol, pre_wet_tips, ML_STAR.media_pre_wet_1, ML_STAR.media_pre_wet_2, ML_STAR, ML_STAR.Tips_1000_Channels);
}
