private function CleanUp(  ) void ;
private function GetParams(  ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function CleanUp(  ) void {
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR, ML_STAR.clear_96_head_seq);
}

private function StartUp(  ) void {
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
}

private function GetParams(  ) void {
  private variable param_dict;
  private variable loc;
  private variable read_line;
  private file file1;
  private variable split_line[];
  private variable loopCounter2;
  private variable culture_volume_str;
  private variable dilution_factor_str;
  private variable lineage_str;
  private variable key_exists;
  param_dict = "param_dict";
  HSLExtensions::Dictionary::CreateDictionary(param_dict, 2);
  file1.AddField(1, read_line, hslString);
  file1.SetDelimiter(hslAsciiText);
  if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    while (
       (file1.Eof() == 0)
    )
    {
      loopCounter2 = loopCounter2 + 1;
      if( 0 == file1.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      loc = StrFind(read_line, ",");
      if (loc > 0)
      {
        split_line = HSLExtensions::String::Split(read_line, Translate(","), 1);
        HSLExtensions::Dictionary::AddItem(param_dict, split_line.ElementAt( 1 -1), split_line.ElementAt( 2 -1));
      }
    }
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  is_pipetting = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isPipetting"));
  is_debugging = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isDebugging"));
  keep_old_GP = HSLExtensions::Dictionary::GetItem(param_dict, Translate("keepOldGrowthPlate"));
  culture_volume_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("cultureVolume"));
  culture_volume = StrFVal(culture_volume_str);
  if (culture_volume > 500)
  {
    culture_volume = 500;
  }
  else
  {
    if (culture_volume < 200)
    {
      culture_volume = 200;
    }
  }
  dilution_factor_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("dilutionFactor"));
  dilution_factor = StrFVal(dilution_factor_str);
  key_exists = HSLExtensions::Dictionary::ExistsItem(param_dict, "lineage");
  if (key_exists == 1)
  {
    lineage_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("lineage"));
    lineage = StrIVal(lineage_str);
  }
  else
  {
    lineage = 1;
  }
}
