 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLLabwrAccess\\HSLLabwrAccess.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Directory.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLTimLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
#include "Cytometry for 6 variants.res"
global device ML_STAR ("Cytometry for 6 variants.lay", "ML_STAR", hslTrue);
variable num_loops;
variable loopCounter1;
variable front_channel;
dialog dialogHandle_1;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    StartUp();
    dialogHandle_1.SetInputSize(1);
    dialogHandle_1.SetInputField(0, Translate("how many?"), hslInteger, 21);
    dialogHandle_1.ShowInput(Translate("How many loops?"), hslInfinite, hslOKOnly | hslDefButton1);
    num_loops = dialogHandle_1.GetInputField(0);
    front_channel = 0;
    {
      for(loopCounter1 = 0; loopCounter1 < num_loops;)
      {
        loopCounter1 = loopCounter1 + 1;
        front_channel = front_channel + 1;
        if (front_channel < 2)
        {
          front_channel = 2;
        }
        else
        {
          if (front_channel > 8)
          {
            front_channel = 2;
          }
        }
        MoveLid(ML_STAR.Media_source_lid, ML_STAR.Lid_parking_Media_trough, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
        MoveLid(ML_STAR.Lid_parking_Media_trough, ML_STAR.Media_source_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
        MoveLid(ML_STAR.ABGene_plate_0002_lid, ML_STAR.Lid_parking_ABGene_plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
        MoveLid(ML_STAR.Lid_parking_ABGene_plate, ML_STAR.ABGene_plate_0002_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
        MoveLid(ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
        MoveLid(ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
      }
    }
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
  } }
