private function CleanUp(  ) void ;
function MoveLid( sequence lid_from_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void ;
private function StartUp(  ) void ;
private function TraceGripper( sequence gripper_sequence, device & STAR ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function CleanUp(  ) void {
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR, ML_STAR.clear_96_head_seq);
  ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
}

private function StartUp(  ) void {
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
}

function MoveLid( sequence lid_from_seq, sequence lid_to_seq, sequence & gripper_sequence, variable new_front_gripper, variable eject_gripper, device & STAR ) void {
  private variable x_acceleration;
  private variable check_lid_on_put;
  private variable grip_opening;
  private variable plate_press;
  private variable z_speed;
  private variable check_lid_on_get;
  private variable grip_width;
  private variable grip_speed;
  private variable grip_force;
  private variable grip_height;
  TrcTrace(Translate("New front channel for CORE grippers: "), front_channel);
  if (new_front_gripper == 1)
  {
    TrcTrace(Translate("New front channel for CORE grippers: "), front_channel);
  }
  else
  {
  }
  grip_height = 4;
  grip_width = 84.5;
  grip_opening = 88;
  grip_force = 5;
  z_speed = 75;
  grip_speed = 277;
  check_lid_on_get = 0;
  check_lid_on_put = 1;
  x_acceleration = 2;
  plate_press = 0.5;
  STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  if (eject_gripper == 1)
  {
    TraceGripper(gripper_sequence, STAR);
  }
  STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
}

private function TraceGripper( sequence gripper_sequence, device & STAR ) void {
  private variable grip_labware_id;
  private variable grip_r;
  private variable grip_x;
  private variable grip_y;
  private variable grip_z;
  grip_labware_id = SeqGetLabwareId(gripper_sequence);
  HSLLabwrAccess::AbsolutePositionValuesGetForLabwareID(STAR, grip_labware_id, grip_x, grip_y, grip_z, grip_r);
  TrcTrace(Translate("Ejecting grippers after move, front channel: "), front_channel);
  TrcTrace8("grip_x: ", grip_x, ", grip_y: ", grip_y, ", grip_z: ", grip_z, ", grip_r: ", grip_r);
}
