 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLExtensions\\Directory.hsl" }
 namespace _Method { #include "HSLTimLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
#include "Cytometry for 6 variants.2 gradients per row.res"
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable pipette_volume;
variable is_debugging;
variable sequence_number;
sequence cytom_plate_lid_arr[];
sequence cytom_plate_move_from_arr[];
sequence cytom_plate_move_to_arr[];
sequence PBS_blank_arr[];
sequence cytom_plate_cells_arr[];
dialog dialogHandle_1;
sequence cytom_plate_lid_move_to_arr[];
dialog dialogHandle_2;
sequence FF_blank_arr[];
global device ML_STAR ("Cytometry for 6 variants.2 gradients per row.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("==========================================================================================\nThis method used for preparing a cytometry plate from a growth plate, \n\nIt uses 16 300 uL tips\n\n=========================================================================================="));
    GetParams();
    StartUp();
    cytom_plate_lid_arr.SetSize(0);
    cytom_plate_lid_arr.AddAsLast(ML_STAR.Cytometer_Plate_1_lid);
    cytom_plate_lid_arr.AddAsLast(ML_STAR.Cytometer_Plate_2_lid);
    cytom_plate_move_from_arr.SetSize(0);
    cytom_plate_move_from_arr.AddAsLast(ML_STAR.Move_Cytometer_Plate_1);
    cytom_plate_move_from_arr.AddAsLast(ML_STAR.Move_Cytometer_Plate_2);
    cytom_plate_move_to_arr.SetSize(0);
    cytom_plate_move_to_arr.AddAsLast(ML_STAR.Cytometer_Plate_1_To_User);
    cytom_plate_move_to_arr.AddAsLast(ML_STAR.Cytometer_Plate_2_To_User);
    cytom_plate_lid_move_to_arr.SetSize(0);
    cytom_plate_lid_move_to_arr.AddAsLast(ML_STAR.Cytometer_Plate_1_To_User_lid);
    cytom_plate_lid_move_to_arr.AddAsLast(ML_STAR.Cytometer_Plate_2_To_User_lid);
    FF_blank_arr.SetSize(0);
    FF_blank_arr.AddAsLast(ML_STAR.FF_blanks_1);
    FF_blank_arr.AddAsLast(ML_STAR.FF_blanks_2);
    PBS_blank_arr.SetSize(0);
    PBS_blank_arr.AddAsLast(ML_STAR.PBS_blanks_1);
    PBS_blank_arr.AddAsLast(ML_STAR.PBS_blanks_2);
    cytom_plate_cells_arr.SetSize(0);
    cytom_plate_cells_arr.AddAsLast(ML_STAR.cytom_plate_cells_1);
    cytom_plate_cells_arr.AddAsLast(ML_STAR.cytom_plate_cells_2);
    PLATEANDLIDMOVEMENT::MoveLid(cytom_plate_lid_arr.ElementAt( sequence_number -1), ML_STAR.Lid_parking_cytometery_plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("=================================================\nPipette Focusing Fluid blanks and beads well\n================================================="));
    pipette_volume = 200;
    if (is_pipetting == "true")
    {
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", 0);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
      PTL::SetTipHandlingState("TipCountingIdentifier", "");
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupChannelVariable", "");
      PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
      if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_300_Channels) )
      {
            PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
      {
        sequence arrseqAspirate_3[];
        sequence arrseqDispense_3[];
        Util2::SeqArrCheckIndex(FF_blank_arr, sequence_number, "FF_blank_arr");
        Util2::SeqArrCheckIndex(FF_blank_arr, sequence_number, "FF_blank_arr");
        arrseqAspirate_3.SetSize(1);
        arrseqAspirate_3.SetAt(0, ML_STAR.Focusing_Fluid_source);
        arrseqDispense_3.SetSize(1);
        arrseqDispense_3.SetAt(0, FF_blank_arr.ElementAt(sequence_number-1));
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 5);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 11);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslFalse);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseJet_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseSubmergeDepth", 0);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
        PTL::SetPipettingState("DispenseFluidHeight", 5);
        PTL::SetPipettingState("DispenseMode", 1);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseJet_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_300_Channels, arrseqAspirate_3, arrseqDispense_3, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Focusing_Fluid_source, FF_blank_arr.ElementAt(sequence_number-1)) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectChannelVariable", "");
      if( 0 == PTL::TipEject(ML_STAR) )
      {
            PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_1.SetOutput(Translate("Focusing Fluid into cytometry plate"), "\n");
        dialogHandle_1.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    MECC::TraceComment(Translate("=================================================\nPipette PBS blanks and PBS for cells\n================================================="));
    if (is_pipetting == "true")
    {
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", 0);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
      PTL::SetTipHandlingState("TipCountingIdentifier", "");
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupChannelVariable", "");
      PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
      if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_300_Channels) )
      {
            PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
      pipette_volume = 200;
      {
        sequence arrseqAspirate_4[];
        sequence arrseqDispense_4[];
        Util2::SeqArrCheckIndex(PBS_blank_arr, sequence_number, "PBS_blank_arr");
        Util2::SeqArrCheckIndex(PBS_blank_arr, sequence_number, "PBS_blank_arr");
        arrseqAspirate_4.SetSize(1);
        arrseqAspirate_4.SetAt(0, ML_STAR.PBS_source);
        arrseqDispense_4.SetSize(1);
        arrseqDispense_4.SetAt(0, PBS_blank_arr.ElementAt(sequence_number-1));
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 5);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 11);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslFalse);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseJet_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseSubmergeDepth", 0);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
        PTL::SetPipettingState("DispenseFluidHeight", 5);
        PTL::SetPipettingState("DispenseMode", 1);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseJet_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_300_Channels, arrseqAspirate_4, arrseqDispense_4, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.PBS_source, PBS_blank_arr.ElementAt(sequence_number-1)) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
      pipette_volume = 195;
      {
        sequence arrseqAspirate_5[];
        sequence arrseqDispense_5[];
        Util2::SeqArrCheckIndex(cytom_plate_cells_arr, sequence_number, "cytom_plate_cells_arr");
        Util2::SeqArrCheckIndex(cytom_plate_cells_arr, sequence_number, "cytom_plate_cells_arr");
        arrseqAspirate_5.SetSize(1);
        arrseqAspirate_5.SetAt(0, ML_STAR.PBS_source);
        arrseqDispense_5.SetSize(1);
        arrseqDispense_5.SetAt(0, cytom_plate_cells_arr.ElementAt(sequence_number-1));
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 5);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 11);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslFalse);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseJet_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseSubmergeDepth", 0);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
        PTL::SetPipettingState("DispenseFluidHeight", 5);
        PTL::SetPipettingState("DispenseMode", 1);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseJet_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_300_Channels, arrseqAspirate_5, arrseqDispense_5, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.PBS_source, cytom_plate_cells_arr.ElementAt(sequence_number-1)) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectChannelVariable", "");
      if( 0 == PTL::TipEject(ML_STAR) )
      {
            PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_2.SetOutput(Translate("Focusing Fluid into cytometry plate"), "\n");
        dialogHandle_2.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_cytometery_plate, cytom_plate_lid_arr.ElementAt( sequence_number -1), ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
  } }
