 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLExtensions\\Sequence.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
 namespace _Method { #include "..\\..\\GSF-IMS.shared_submethods.hs_" }
#include "Cytometry for 3 ligands and 5 variants.res"
variable worklist_file_path;
variable strain_1_id;
variable strain_str;
variable plasmid_str;
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable culture_volume;
variable pipette_volume;
variable is_debugging;
dialog dialogHandle_1;
dialog dialogHandle_2;
variable dilution_factor;
variable media_volume;
variable cell_volume;
variable additive_stock_concentration;
variable additive_id;
variable additive_units;
variable lineage;
sequence old_GP_lid_arr[];
dialog dialogHandle_3;
sequence Inducer_source_arr[];
variable inducer_3_stock_concentration;
variable inducer_3_id;
variable inducer_2_id;
variable inducer_1_units;
variable inducer_1_id;
variable inducer_2_units;
variable inducer_2_stock_concentration;
variable inducer_3_units;
variable inducer_1_stock_concentration;
global device ML_STAR ("Cytometry for 3 ligands and 5 variants.lay", "ML_STAR", hslTrue);
sequence Inducer_grad_start_arr[];
variable plasmid_2_id;
variable plasmid_1_id;
variable plasmid_5_id;
variable plasmid_4_id;
variable plasmid_3_id;
dialog dialogHandle_4;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("==============================================================\nThis method used for preparing plate 2, with inducer gradient but no selector\n\nIt uses 16 1000 uL tips and 8 300 uL tips\nand 1.2 mL of inducer stock\n=============================================================="));
    GetParams();
    StartUp();
    old_GP_lid_arr.SetSize(0);
    old_GP_lid_arr.AddAsLast(ML_STAR.Lid_parking_Old_Growth_Plate);
    old_GP_lid_arr.AddAsLast(ML_STAR.Lid_parking_Old_Growth_Plate_2);
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_source_lid, ML_STAR.Lid_parking_Media_trough, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    cell_volume = culture_volume / (dilution_factor * 1.0);
    media_volume = culture_volume - cell_volume;
    TrcTrace(Translate("cell_volume: "), cell_volume);
    TrcTrace(Translate("media_volume: "), media_volume);
    MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate and gradient starter plate\n=============================================================="));
    if (is_pipetting == "true")
    {
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", 0);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
      PTL::SetTipHandlingState("TipCountingIdentifier", "");
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupChannelVariable", "");
      PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
      if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_1000_Channels) )
      {
            PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
      pipette_volume = media_volume;
      pipette_media(ML_STAR.Growth_Plate, pipette_volume, 1);
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectChannelVariable", "");
      if( 0 == PTL::TipEject(ML_STAR) )
      {
            PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_1.SetOutput(Translate("media into growth plate"), "\n", Translate("media into Abgene plate"), "\n");
        dialogHandle_1.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Media_trough, ML_STAR.Media_source_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
    if (is_pipetting == "true")
    {
      pipette_volume = cell_volume;
      {
        sequence arrseqAspirate_5[];
        sequence arrseqDispense_5[];
        arrseqAspirate_5.SetSize(1);
        arrseqAspirate_5.SetAt(0, ML_STAR.Bacteria_stock);
        arrseqDispense_5.SetSize(1);
        arrseqDispense_5.SetAt(0, ML_STAR.Bacteria_dispense);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 5);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 11);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "11111000");
        PTL::SetPipettingState("InitializeEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupChannelVariable", "11111000");
        PTL::SetPipettingState("TipPickupEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "11111000");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "11111000");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("AspiratePrerinsingMixCycles", 1);
        PTL::SetPipettingState("AspiratePrerinsingMixPosition", 8);
        PTL::SetPipettingState("AspiratePrerinsingMixVolume", 800);
        PTL::SetPipettingState("DispenseSubmergeDepth", 0);
        PTL::SetPipettingState("DispenseChannelVariable", "11111000");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
        PTL::SetPipettingState("DispenseFluidHeight", 5);
        PTL::SetPipettingState("DispenseMode", 3);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_5, arrseqDispense_5, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Bacteria_stock, ML_STAR.Bacteria_dispense) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_4.SetOutput(Translate("media into growth plate"), "\n", Translate("media into Abgene plate"), "\n");
        dialogHandle_4.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_Handoff_lid, old_GP_lid_arr.ElementAt( lineage -1), ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CalculateOutputs();
    SaveWorklistAndMetadata();
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_ExitLibrary();
  } }
