 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLExtensions\\Directory.hsl" }
 namespace _Method { #include "HSLTimLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
#include "Cytometry for 6 variants.res"
variable inducer_stock_concentration;
variable inducer_id;
variable inducer_units;
variable worklist_file_path;
variable strain_1_id;
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable is_debugging;
variable additive_id;
variable additive_units;
variable input_worklist_path;
variable sequence_number;
sequence cytom_plate_lid_arr[];
sequence cytom_plate_move_from_arr[];
sequence cytom_plate_move_to_arr[];
sequence FF_blank_arr[];
sequence PBS_blank_arr[];
sequence cytom_plate_cells_arr[];
sequence cytom_plate_lid_move_to_arr[];
variable pipette_volume;
variable mix_volume;
variable strain_str;
variable plasmid_str;
global device ML_STAR ("Cytometry for 6 variants.lay", "ML_STAR", hslTrue);
variable plasmid_C_id;
variable plasmid_B_id;
variable plasmid_G_id;
variable plasmid_F_id;
variable plasmid_E_id;
variable plasmid_D_id;
variable additive_stock_concentration;
variable lineage;
sequence old_GP_lid_arr[];
variable inducer_3_stock_concentration;
variable inducer_3_id;
variable inducer_2_id;
variable inducer_1_units;
variable inducer_1_id;
variable inducer_2_units;
variable inducer_2_stock_concentration;
variable inducer_3_units;
variable inducer_1_stock_concentration;
variable twoStrainsThreeLigands;
variable inducer_4_id;
variable inducer_4_units;
variable inducer_4_stock_concentration;
variable twelveStrainsFourLigands;
variable gradStartFullConc;
variable pipetteThreeLigands;
variable inducer_1_baseline;
variable dil_series_factor;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("==========================================================================================\nThis method used for preparing a cytometry plate from a growth plate\n\nIt uses 72 300 uL tips\n=========================================================================================="));
    strain_str = "strain";
    plasmid_str = "plasmid";
    GetParams();
    StartUp();
    dil_series_factor = 2.0;
    old_GP_lid_arr.SetSize(0);
    old_GP_lid_arr.AddAsLast(ML_STAR.Lid_parking_Old_Growth_Plate);
    old_GP_lid_arr.AddAsLast(ML_STAR.Lid_parking_Old_Growth_Plate_2);
    cytom_plate_lid_arr.SetSize(0);
    cytom_plate_lid_arr.AddAsLast(ML_STAR.Cytometer_Plate_1_lid);
    cytom_plate_lid_arr.AddAsLast(ML_STAR.Cytometer_Plate_2_lid);
    cytom_plate_move_from_arr.SetSize(0);
    cytom_plate_move_from_arr.AddAsLast(ML_STAR.Move_Cytometer_Plate_1);
    cytom_plate_move_from_arr.AddAsLast(ML_STAR.Move_Cytometer_Plate_2);
    cytom_plate_move_to_arr.SetSize(0);
    cytom_plate_move_to_arr.AddAsLast(ML_STAR.Cytometer_Plate_1_To_User);
    cytom_plate_move_to_arr.AddAsLast(ML_STAR.Cytometer_Plate_2_To_User);
    cytom_plate_lid_move_to_arr.SetSize(0);
    cytom_plate_lid_move_to_arr.AddAsLast(ML_STAR.Cytometer_Plate_1_To_User_lid);
    cytom_plate_lid_move_to_arr.AddAsLast(ML_STAR.Cytometer_Plate_2_To_User_lid);
    FF_blank_arr.SetSize(0);
    FF_blank_arr.AddAsLast(ML_STAR.FF_blanks_1);
    FF_blank_arr.AddAsLast(ML_STAR.FF_blanks_2);
    PBS_blank_arr.SetSize(0);
    PBS_blank_arr.AddAsLast(ML_STAR.PBS_blanks_1);
    PBS_blank_arr.AddAsLast(ML_STAR.PBS_blanks_2);
    cytom_plate_cells_arr.SetSize(0);
    cytom_plate_cells_arr.AddAsLast(ML_STAR.cytom_plate_cells_1);
    cytom_plate_cells_arr.AddAsLast(ML_STAR.cytom_plate_cells_2);
    PLATEANDLIDMOVEMENT::MoveLid(cytom_plate_lid_arr.ElementAt( sequence_number -1), ML_STAR.Lid_parking_cytometery_plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("==========================================\nTransfer cells from old GP to cytometry plate\n=========================================="));
    pipette_volume = 5;
    mix_volume = 150;
    {
      sequence arrseqAspirate_1[];
      sequence arrseqDispense_1[];
      Util2::SeqArrCheckIndex(cytom_plate_cells_arr, sequence_number, "cytom_plate_cells_arr");
      Util2::SeqArrCheckIndex(cytom_plate_cells_arr, sequence_number, "cytom_plate_cells_arr");
      arrseqAspirate_1.SetSize(1);
      arrseqAspirate_1.SetAt(0, ML_STAR.Old_GP_cells);
      arrseqDispense_1.SetSize(1);
      arrseqDispense_1.SetAt(0, cytom_plate_cells_arr.ElementAt(sequence_number-1));
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 12);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateFluidHeight", 1);
      PTL::SetPipettingState("AspirateSubmergeDepth", 0);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslFalse);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslTrue);
      PTL::SetPipettingState("DispenseSequenceReducible", hslTrue);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_300_Channels, arrseqAspirate_1, arrseqDispense_1, 1, 1, pipette_volume, 0, 1, hslInfinite, hslInfinite, 1, "", ML_STAR.Old_GP_cells, cytom_plate_cells_arr.ElementAt(sequence_number-1)) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_cytometery_plate, cytom_plate_lid_arr.ElementAt( sequence_number -1), ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveCytometryPlateWithLid(cytom_plate_move_from_arr.ElementAt( sequence_number -1), cytom_plate_lid_arr.ElementAt( sequence_number -1), cytom_plate_move_to_arr.ElementAt( sequence_number -1), cytom_plate_lid_move_to_arr.ElementAt( sequence_number -1), ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(old_GP_lid_arr.ElementAt( lineage -1), ML_STAR.Old_Growth_Plate_parking_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLidNoTap(ML_STAR.Move_Old_Growth_Plate_park, ML_STAR.Old_Growth_Plate_parking_lid, ML_STAR.Growth_Plate_waste, ML_STAR.Growth_Plate_waste_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CalculateOutputs();
    SaveWorklistAndMetadata();
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
  } }
