 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLExtensions\\Directory.hsl" }
 namespace _Method { #include "HSLTimLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
#include "Cytometry for 24 constitutive plasmids.res"
 namespace _Method { #include "..\\..\\GSF-IMS.shared_submethods.hs_" }
variable worklist_file_path;
variable strain_1_id;
variable strain_str;
variable plasmid_str;
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable culture_volume;
variable is_debugging;
dialog dialogHandle_1;
dialog dialogHandle_2;
variable lineage;
sequence old_GP_lid_arr[];
global device ML_STAR ("Cytometry for 24 constitutive plasmids.lay", "ML_STAR", hslTrue);
variable numberOfPlasmids;
variable plasmid_id_arr[];
variable media_volume;
variable cell_volume;
sequence Bacteria_stock_arr[];
sequence Bacteria_dispense_arr[];
variable bact_counter;
variable sub_seq_end;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("==========================================================================================\nThis method used for preparing plate 1, with just media and bacteria in every third well of of rows B-G, for growth to stationary phase.\nfor testing up to 24 constitutive expression plasmids\n\nIt uses 14 1000 uL tips\n=========================================================================================="));
    GetParams();
    StartUp();
    old_GP_lid_arr.SetSize(0);
    old_GP_lid_arr.AddAsLast(ML_STAR.Lid_parking_Old_Growth_Plate);
    old_GP_lid_arr.AddAsLast(ML_STAR.Lid_parking_Old_Growth_Plate_2);
    PLATEANDLIDMOVEMENT::MoveLidNoTap(old_GP_lid_arr.ElementAt( lineage -1), ML_STAR.Waste_Growth_Plate_Lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_source_lid, ML_STAR.Lid_parking_Media_trough, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate.\n=============================================================="));
    if (is_pipetting == "true")
    {
      media_volume = culture_volume * 0.9;
      GSF_IMS_SHARED_SUBMETHODS::tip_pickup(ML_STAR.Tips_1000_Channels, 8, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from, ML_STAR.Media_dispense, media_volume, 1, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::tip_eject(8, ML_STAR);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_1.SetOutput(Translate("media into growth plate"), "\n");
        dialogHandle_1.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Media_trough, ML_STAR.Media_source_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nPipette cells into growth plate.\n=============================================================="));
    Bacteria_stock_arr.SetSize(0);
    Bacteria_stock_arr.AddAsLast(ML_STAR.Bacteria_stock_1);
    Bacteria_stock_arr.AddAsLast(ML_STAR.Bacteria_stock_2);
    Bacteria_stock_arr.AddAsLast(ML_STAR.Bacteria_stock_3);
    Bacteria_stock_arr.AddAsLast(ML_STAR.Bacteria_stock_4);
    Bacteria_dispense_arr.SetSize(0);
    Bacteria_dispense_arr.AddAsLast(ML_STAR.Bacteria_dispense_1);
    Bacteria_dispense_arr.AddAsLast(ML_STAR.Bacteria_dispense_2);
    Bacteria_dispense_arr.AddAsLast(ML_STAR.Bacteria_dispense_3);
    Bacteria_dispense_arr.AddAsLast(ML_STAR.Bacteria_dispense_4);
    if (is_pipetting == "true")
    {
      cell_volume = culture_volume * 0.1;
      {
        for(bact_counter = 0; bact_counter < 4;)
        {
          bact_counter = bact_counter + 1;
          sub_seq_end = bact_counter * 6;
          sub_seq_end = sub_seq_end - 5;
          if (numberOfPlasmids >= sub_seq_end)
          {
            GSF_IMS_SHARED_SUBMETHODS::pipette_cells_from_tubes(Bacteria_stock_arr.ElementAt( bact_counter -1), Bacteria_dispense_arr.ElementAt( bact_counter -1), cell_volume, 2, 800, ML_STAR.Tips_1000_Channels, 6, ML_STAR);
          }
        }
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_2.SetOutput(Translate("cells into growth plate"), "\n");
        dialogHandle_2.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_Handoff_lid, old_GP_lid_arr.ElementAt( lineage -1), ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    if(0){
      CalculateOutputs();
      SaveWorklistAndMetadata();
    }
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_ExitLibrary();
  } }
