 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLExtensions\\Sequence.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
 namespace _Method { #include "..\\..\\GSF-IMS.shared_submethods.hs_" }
#include "Cytometry for 24 constitutive plasmids.res"
variable worklist_file_path;
variable strain_1_id;
variable strain_str;
variable plasmid_str;
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable culture_volume;
variable is_debugging;
dialog dialogHandle_1;
variable media_volume;
variable cell_volume;
variable additive_stock_concentration;
variable additive_id;
variable additive_units;
variable sequence_number;
variable lineage;
sequence old_GP_lid_arr[];
global device ML_STAR ("Cytometry for 24 constitutive plasmids.lay", "ML_STAR", hslTrue);
variable dilution_factor;
variable numberOfPlasmids;
variable plasmid_id_arr[];
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("==============================================================\nThis method used for preparing plate 2, with inducer gradient but no selector\n\nIt uses 16 1000 uL tips and 8 300 uL tips\nand 1.2 mL of inducer stock\n=============================================================="));
    GetParams();
    StartUp();
    old_GP_lid_arr.SetSize(0);
    old_GP_lid_arr.AddAsLast(ML_STAR.Lid_parking_Old_Growth_Plate);
    old_GP_lid_arr.AddAsLast(ML_STAR.Lid_parking_Old_Growth_Plate_2);
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_source_lid, ML_STAR.Lid_parking_Media_trough, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate and gradient starter plate\n=============================================================="));
    cell_volume = culture_volume / (dilution_factor * 1.0);
    media_volume = culture_volume - cell_volume;
    if (is_pipetting == "true")
    {
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", 0);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
      PTL::SetTipHandlingState("TipCountingIdentifier", "");
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupChannelVariable", "");
      PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
      if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_1000_Channels) )
      {
            PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
      pipette_media(ML_STAR.Bacteria_dispense, media_volume, 1);
      pipette_media(ML_STAR.GP_no_bacteria, culture_volume, 2);
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectChannelVariable", "");
      if( 0 == PTL::TipEject(ML_STAR) )
      {
            PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_1.SetOutput(Translate("media into growth plate"), "\n", Translate("media into Abgene plate"), "\n");
        dialogHandle_1.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Media_trough, ML_STAR.Media_source_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CalculateOutputs();
    SaveWorklistAndMetadata();
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_ExitLibrary();
  } }
