 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLExtensions\\Sequence.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
#include "Cytometry for 6 variants.res"
sequence tip_seq_arr[];
variable tip_counter_array[];
variable inducer_volume;
global device ML_STAR ("Cytometry for 6 variants.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("==============================================================\nThis method used for preparing plate 2, with inducer gradient but no selector\n\nIt uses 16 1000 uL tips and 8 300 uL tips\nand 1.2 mL of inducer stock\n=============================================================="));
    StartUp();
    MECC::TraceComment(Translate("==============================================================\nPipette inducer (e.g. IPTG) stock into IPTG_2x wells\n=============================================================="));
    inducer_volume = 686;
    {
      sequence arrseqAspirate_1[];
      sequence arrseqDispense_1[];
      arrseqAspirate_1.SetSize(1);
      arrseqAspirate_1.SetAt(0, ML_STAR.Inducer_10x_stock);
      arrseqDispense_1.SetSize(1);
      arrseqDispense_1.SetAt(0, ML_STAR.Inducer_grad_start_1_high);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "01111110");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "01111110");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "01111110");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "01111110");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "01111110");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 5);
      PTL::SetPipettingState("DispenseMode", 1);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_1, arrseqDispense_1, 1, 1, inducer_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Inducer_10x_stock, ML_STAR.Inducer_grad_start_1_high) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
  } }
