 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
 namespace _Method { #include "GSF-IMS Project\\GSF-IMS.shared_submethods.hs_" }
 namespace _Method { #include "HSLExtensions\\Sequence.hsl" }
#include "Double 2D Gradient.res"
variable plasmid_1_id;
variable worklist_file_path;
variable strain_1_id;
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable culture_volume;
variable mix_volume;
variable is_debugging;
dialog dialogHandle_1;
variable dilution_factor;
variable media_volume;
variable cell_volume;
variable sequence_number;
dialog dialogHandle_2;
variable dil_series_factor;
variable dil_series_multiplier;
variable inducer_ref_volume;
variable plasmid_2_id;
variable plate_number;
variable additive_1_units;
variable additive_1_stock_concentration;
variable additive_1_id;
variable pipette_volume;
global device ML_STAR ("Double 2D Gradient.lay", "ML_STAR", hslTrue);
sequence inducer_stock_grad_start_arr[];
sequence inducer_stock_grad_from_arr[];
sequence inducer_stock_grad_to_arr[];
sequence inducer_stock_grad_arr[];
variable antibiotic_stock_factor;
variable inducer_stock_factor;
variable antibiotic_ref_volume;
variable antibiotic_dil_series_transf_vol;
variable first_antibiotic_seq;
variable inducer_stock_grad_vol;
variable inducer_stock_grad_trasnf_vol;
variable with_antibiotic;
variable inducer_stock_grad_start_vol;
variable antibiotic_grad_start_volume;
variable grad_start_inducer_vol;
variable inducer_volume;
variable media_volume_with_inducer;
sequence inducer_stock_media_arr[];
variable grad_start_media_vol_with_inducer;
variable grad_start_media_volume_0;
variable inducer_id;
variable inducer_units;
variable inducer_stock_concentration;
variable additive_2_stock_concentration;
variable additive_2_units;
variable additive_2_id;
variable use_two_strains;
variable strain_2_id;
sequence grad_from_seq;
sequence grad_to_seq;
variable loopCounter1;
dialog dialogHandle_3;
dialog dialogHandle_4;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("==============================================================\nThis method used for preparing plate 2, with inducer gradient but no selector\n\nIt uses 16 1000 uL tips and 8 300 uL tips\nand 1.2 mL of inducer stock\n=============================================================="));
    GetParams();
    StartUp();
    inducer_stock_grad_start_arr.SetSize(0);
    inducer_stock_grad_start_arr.AddAsLast(ML_STAR.inducer_stock_grad_1_start);
    inducer_stock_grad_start_arr.AddAsLast(ML_STAR.inducer_stock_grad_2_start);
    inducer_stock_grad_start_arr.AddAsLast(ML_STAR.inducer_stock_grad_3_start);
    inducer_stock_grad_start_arr.AddAsLast(ML_STAR.inducer_stock_grad_4_start);
    inducer_stock_grad_start_arr.AddAsLast(ML_STAR.inducer_stock_grad_5_start);
    inducer_stock_grad_from_arr.SetSize(0);
    inducer_stock_grad_from_arr.AddAsLast(ML_STAR.inducer_stock_grad_1_from);
    inducer_stock_grad_from_arr.AddAsLast(ML_STAR.inducer_stock_grad_2_from);
    inducer_stock_grad_from_arr.AddAsLast(ML_STAR.inducer_stock_grad_3_from);
    inducer_stock_grad_from_arr.AddAsLast(ML_STAR.inducer_stock_grad_4_from);
    inducer_stock_grad_from_arr.AddAsLast(ML_STAR.inducer_stock_grad_5_from);
    inducer_stock_grad_to_arr.SetSize(0);
    inducer_stock_grad_to_arr.AddAsLast(ML_STAR.inducer_stock_grad_1_to);
    inducer_stock_grad_to_arr.AddAsLast(ML_STAR.inducer_stock_grad_2_to);
    inducer_stock_grad_to_arr.AddAsLast(ML_STAR.inducer_stock_grad_3_to);
    inducer_stock_grad_to_arr.AddAsLast(ML_STAR.inducer_stock_grad_4_to);
    inducer_stock_grad_to_arr.AddAsLast(ML_STAR.inducer_stock_grad_5_to);
    inducer_stock_grad_arr.SetSize(0);
    inducer_stock_grad_arr.AddAsLast(ML_STAR.inducer_stock_grad_1);
    inducer_stock_grad_arr.AddAsLast(ML_STAR.inducer_stock_grad_2);
    inducer_stock_grad_arr.AddAsLast(ML_STAR.inducer_stock_grad_3);
    inducer_stock_grad_arr.AddAsLast(ML_STAR.inducer_stock_grad_4);
    inducer_stock_grad_arr.AddAsLast(ML_STAR.inducer_stock_grad_5);
    inducer_stock_media_arr.SetSize(0);
    inducer_stock_media_arr.AddAsLast(ML_STAR.inducer_stock_media_1);
    inducer_stock_media_arr.AddAsLast(ML_STAR.inducer_stock_media_2);
    inducer_stock_media_arr.AddAsLast(ML_STAR.inducer_stock_media_3);
    inducer_stock_media_arr.AddAsLast(ML_STAR.inducer_stock_media_4);
    inducer_stock_media_arr.AddAsLast(ML_STAR.inducer_stock_media_5);
    dil_series_multiplier = dil_series_factor - 1.0;
    dil_series_multiplier = dil_series_factor / (dil_series_multiplier * 1.0);
    cell_volume = culture_volume / (dilution_factor * 1.0);
    media_volume = culture_volume - cell_volume;
    antibiotic_dil_series_transf_vol = media_volume * dil_series_multiplier;
    antibiotic_dil_series_transf_vol = antibiotic_dil_series_transf_vol - media_volume;
    inducer_stock_grad_vol = 1000;
    inducer_stock_grad_start_vol = inducer_stock_grad_vol * dil_series_multiplier;
    inducer_stock_grad_trasnf_vol = inducer_stock_grad_start_vol - inducer_stock_grad_vol;
    first_antibiotic_seq = 2;
    if (sequence_number < first_antibiotic_seq)
    {
      inducer_ref_volume = culture_volume;
      antibiotic_ref_volume = culture_volume;
      with_antibiotic = 0;
    }
    else
    {
      with_antibiotic = 1;
      if (sequence_number == first_antibiotic_seq)
      {
        inducer_ref_volume = media_volume;
        antibiotic_ref_volume = culture_volume;
      }
      else
      {
        if (sequence_number > first_antibiotic_seq)
        {
          inducer_ref_volume = media_volume;
          antibiotic_ref_volume = media_volume;
        }
      }
    }
    if (with_antibiotic == 1)
    {
      antibiotic_grad_start_volume = antibiotic_ref_volume / (antibiotic_stock_factor * 1.0);
      antibiotic_grad_start_volume = antibiotic_grad_start_volume * dil_series_multiplier;
    }
    else
    {
      antibiotic_grad_start_volume = 0;
    }
    inducer_volume = inducer_ref_volume / (inducer_stock_factor * 1.0);
    media_volume_with_inducer = media_volume - inducer_volume;
    if (with_antibiotic == 1)
    {
      grad_start_inducer_vol = inducer_ref_volume / (inducer_stock_factor * 1.0);
      grad_start_inducer_vol = grad_start_inducer_vol * dil_series_multiplier;
      grad_start_media_volume_0 = media_volume * dil_series_multiplier;
      grad_start_media_vol_with_inducer = grad_start_media_volume_0 - grad_start_inducer_vol;
      grad_start_media_vol_with_inducer = grad_start_media_vol_with_inducer - antibiotic_grad_start_volume;
    }
    else
    {
      grad_start_inducer_vol = inducer_volume;
      grad_start_media_vol_with_inducer = media_volume_with_inducer;
    }
    TrcTrace(Translate("dil_series_factor: "), dil_series_factor);
    TrcTrace(Translate("dil_series_multiplier: "), dil_series_multiplier);
    TrcTrace(Translate("dilution_factor: "), dilution_factor);
    TrcTrace(Translate("cell_volume: "), cell_volume);
    TrcTrace(Translate("media_volume: "), media_volume);
    TrcTrace(Translate("antibiotic_dil_series_transf_vol: "), antibiotic_dil_series_transf_vol);
    TrcTrace(Translate("inducer_volume: "), inducer_volume);
    TrcTrace(Translate("with_antibiotic: "), with_antibiotic);
    TrcTrace(Translate("antibiotic_grad_start_volume: "), antibiotic_grad_start_volume);
    TrcTrace(Translate("sequence_number: "), sequence_number);
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Eppendorf_plate_lid, ML_STAR.Lid_parking_Eppendorf_plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_source_lid, ML_STAR.Lid_parking_Media_trough, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate and gradient starter plate\n=============================================================="));
    if (is_pipetting == "true")
    {
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", 0);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
      PTL::SetTipHandlingState("TipCountingIdentifier", "");
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupChannelVariable", "");
      PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
      if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_1000_Channels) )
      {
            PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
      pipette_media(ML_STAR.regular_media, media_volume_with_inducer, 1);
      pipette_media(ML_STAR.antibiotic_grad_start_wells, grad_start_media_vol_with_inducer, 2);
      pipette_media(inducer_stock_media_arr.ElementAt( sequence_number -1), inducer_stock_grad_vol, 2);
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectChannelVariable", "");
      if( 0 == PTL::TipEject(ML_STAR) )
      {
            PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
      ML_STAR.Media_pipette_from.SetCurrentPosition(1);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_1.SetOutput(Translate("media into growth plate"), "\n", Translate("media into Abgene plate"), "\n");
        dialogHandle_1.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Media_trough, ML_STAR.Media_source_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    PTL::ResetTipHandlingState();
    PTL::SetTipHandlingState("UserResponseTime", 0);
    PTL::SetTipHandlingState("ErrorHandling", 3);
    PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
    PTL::SetTipHandlingState("TipCountingIdentifier", "");
    PTL::SetTipHandlingState("InitializeCustomStepID", 0);
    PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
    PTL::SetTipHandlingState("TipPickupChannelVariable", "10000000");
    PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
    PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
    if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_1000_Channels) )
    {
          PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    MECC::TraceComment(Translate("*** Add inducer stock to starting well of Eppendorf plate ***\n*** inducer_stock_grad_start_vol is > 1 mL, so pipette in two steps ***"));
    pipette_volume = inducer_stock_grad_start_vol / (2 * 1.0);
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    mix_volume = inducer_stock_grad_start_vol * 0.7;
    if (mix_volume > 1000)
    {
      mix_volume = 1000;
    }
    grad_from_seq=inducer_stock_grad_from_arr.GetAt(sequence_number-1);
    grad_to_seq=inducer_stock_grad_to_arr.GetAt(sequence_number-1);
    {
      loopCounter1 = 0;
      while (
         (grad_from_seq.GetCurrentPosition() > 0)
      && (grad_to_seq.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, grad_from_seq, 1, grad_to_seq, 1);
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (
           (grad_from_seq.GetCurrentPosition() > 0 && grad_from_seq.GetMax() == 0 )
        && (grad_to_seq.GetCurrentPosition() > 0 && grad_to_seq.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      grad_from_seq.SetMax(grad_from_seq.GetTotal());
      grad_to_seq.SetMax(grad_to_seq.GetTotal());
      grad_from_seq.SetCurrentPosition(1);
      grad_to_seq.SetCurrentPosition(1);
    }
    PTL::ResetTipHandlingState();
    PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
    PTL::SetTipHandlingState("ErrorHandling", 3);
    PTL::SetTipHandlingState("InitializeCustomStepID", 0);
    PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
    PTL::SetTipHandlingState("TipEjectChannelVariable", "10000000");
    if( 0 == PTL::TipEject(ML_STAR) )
    {
          PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    MECC::TraceComment(Translate("==============================================================\nDilute inducer stock_gradient from Eppendorf plate into wells of growth plate\n=============================================================="));
    ML_STAR.antibiotic_grad_start_wells.SetCurrentPosition(1);
    ML_STAR.regular_media.SetCurrentPosition(1);
    if (is_pipetting == "true")
    {
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", 0);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
      PTL::SetTipHandlingState("TipCountingIdentifier", "");
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupChannelVariable", "");
      PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
      if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_300_Channels) )
      {
            PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
      MECC::TraceComment(Translate("****  pipette inducer to antibiotic_grad_start wells ***"));
      pipette_inducer(ML_STAR.Tips_300_Channels, inducer_stock_grad_arr.ElementAt( sequence_number -1), ML_STAR.antibiotic_grad_start_wells, grad_start_inducer_vol);
      MECC::TraceComment(Translate("****  pipette inducer to regular wells ***"));
      pipette_inducer(ML_STAR.Tips_300_Channels, inducer_stock_grad_arr.ElementAt( sequence_number -1), ML_STAR.regular_media, inducer_volume);
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectChannelVariable", "");
      if( 0 == PTL::TipEject(ML_STAR) )
      {
            PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_2.SetOutput(Translate("Reagent stock plate to Growth plate"), "\n");
        dialogHandle_2.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    if (with_antibiotic == 1)
    {
      MECC::TraceComment(Translate("==============================================================\nAdd antibiotics to antibiotic_grad_start_ wells\n=============================================================="));
      if (is_pipetting == "true")
      {
        pipette_selector(ML_STAR.antibiotic_1_5x_stock, ML_STAR.antibiotic_grad_start_1, antibiotic_grad_start_volume, 2, ML_STAR.antibiotic_1_5x_stock, ML_STAR.antibiotic_1_5x_stock);
        pipette_selector(ML_STAR.antibiotic_2_5x_stock, ML_STAR.antibiotic_grad_start_2, antibiotic_grad_start_volume, 2, ML_STAR.antibiotic_2_5x_stock, ML_STAR.antibiotic_2_5x_stock);
      }
      else
      {
        if (is_debugging == "true")
        {
          dialogHandle_3.SetOutput(Translate("Reagent stock plate to Growth plate"), "\n");
          dialogHandle_3.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        }
      }
    }
    else
    {
      MECC::TraceComment(Translate("==============================================================\nNo antibiotics for this plate\n=============================================================="));
    }
    MECC::TraceComment(Translate("*** Replace lid onto Reagent stock plate ***"));
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
    if (with_antibiotic == 1)
    {
      MECC::TraceComment(Translate("==============================================================\nPipete inducer dilution gradients\n=============================================================="));
      if (is_pipetting == "true")
      {
        pipette_volume = antibiotic_dil_series_transf_vol;
        mix_volume = media_volume * 1;
        pipette_dil_series(ML_STAR.antibiotic_grad_from_1, ML_STAR.antibiotic_grad_to_1, pipette_volume, mix_volume, 8);
        pipette_dil_series(ML_STAR.antibiotic_grad_from_2, ML_STAR.antibiotic_grad_to_2, pipette_volume, mix_volume, 8);
      }
      else
      {
        if (is_debugging == "true")
        {
          dialogHandle_4.SetOutput(Translate("Growth plate and Abgene plate"), "\n");
          dialogHandle_4.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        }
      }
    }
    else
    {
    }
    if (plate_number == 1)
    {
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
      PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Eppendorf_plate, ML_STAR.Eppendorf_plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Lid_parking_Old_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    }
    else
    {
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Eppendorf_plate, ML_STAR.Eppendorf_plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    }
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CalculateOutputs();
    SaveWorklistAndMetadata();
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_ExitLibrary();
  } }
