private function CalculateOutputs(  ) void ;
private function CleanUp(  ) void ;
private function GetParams(  ) void ;
private function SaveWorklistAndMetadata(  ) void ;
private function StartUp(  ) void ;
private function pipette_dil_series( sequence & from_seq, sequence & to_seq, variable p_vol, variable m_vol, variable number_channels ) void ;
private function pipette_inducer( sequence & tip_seq, sequence & asp_seq, sequence & disp_seq, variable p_vol ) void ;
private function pipette_media( sequence & disp_seq, variable p_vol, variable pre_wet_tips ) void ;
private function pipette_selector( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable pre_wet_tips, sequence & pre_wet_1, sequence & pre_wet_2 ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function CleanUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        TipCount::Write2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        TipCount::Write2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        TipCount::Write2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR, ML_STAR.clear_96_head_seq);
}

private function StartUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  TIP_HANDLING_WITH_96_HEAD::GetTipCounters(tip_counter_array, 1);
  tip_seq_arr.SetSize(0);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_300_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_50_Channels);
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
}

private function CalculateOutputs(  ) void {
  private variable well_id;
  private variable labware_id;
  private variable prop_arr[];
  private sequence calc_antibiotic_grad_arr[];
  private variable gradient_num;
  private variable antibiotic_stock_conc_arr[];
  private variable additive_conc;
  private sequence grad_sequence;
  private variable loopCounter2;
  private variable loopCounter3;
  private variable antibiotic_id_arr[];
  private variable antibiotic_units_arr[];
  private variable additive_id;
  private variable additive_units;
  private variable inducer_conc;
  private variable strain;
  private variable plasmid;
  MECC::TraceComment(Translate("**** CalculateOutputs sub-method ****"));
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "inducer_conc", 0);
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "additive_conc", 0);
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "additive_id", "none");
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "additive_units", "N/A");
  labware_id = "";
  well_id = "";
  prop_arr.SetSize(0);
  prop_arr.AddAsLast(Translate("inducer_conc"));
  prop_arr.AddAsLast(Translate("additive_conc"));
  prop_arr.AddAsLast(Translate("additive_id"));
  prop_arr.AddAsLast(Translate("additive_units"));
  if (with_antibiotic == 1)
  {
    calc_antibiotic_grad_arr.SetSize(0);
    calc_antibiotic_grad_arr.AddAsLast(ML_STAR.calc_antibiotic_grad_1);
    calc_antibiotic_grad_arr.AddAsLast(ML_STAR.calc_antibiotic_grad_2);
    antibiotic_stock_conc_arr.SetSize(0);
    antibiotic_stock_conc_arr.AddAsLast(additive_1_stock_concentration);
    antibiotic_stock_conc_arr.AddAsLast(additive_2_stock_concentration);
    antibiotic_id_arr.SetSize(0);
    antibiotic_id_arr.AddAsLast(additive_1_id);
    antibiotic_id_arr.AddAsLast(additive_2_id);
    antibiotic_units_arr.SetSize(0);
    antibiotic_units_arr.AddAsLast(additive_1_units);
    antibiotic_units_arr.AddAsLast(additive_2_units);
    {
      for(gradient_num = 0; gradient_num < 2;)
      {
        gradient_num = gradient_num + 1;
        additive_conc = antibiotic_stock_conc_arr.ElementAt( gradient_num -1) / (antibiotic_stock_factor * 1.0);
        labware_id = SeqGetLabwareId(calc_antibiotic_grad_arr.ElementAt( gradient_num -1));
        grad_sequence=calc_antibiotic_grad_arr.GetAt(gradient_num-1);
        additive_id=antibiotic_id_arr.GetAt(gradient_num-1);
        additive_units=antibiotic_units_arr.GetAt(gradient_num-1);
        {
          loopCounter2 = 0;
          while (
             (grad_sequence.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, grad_sequence, 1);
            loopCounter2 = loopCounter2 + 1;
            {
              for(loopCounter3 = 0; loopCounter3 < 8;)
              {
                loopCounter3 = loopCounter3 + 1;
                well_id = SeqGetPositionId(grad_sequence);
                LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, Translate("additive_conc"), additive_conc);
                LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, Translate("additive_id"), additive_id);
                LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, Translate("additive_units"), additive_units);
                SeqIncrement(grad_sequence, 1);
              }
            }
            additive_conc = additive_conc / (dil_series_factor * 1.0);
            if (
               (grad_sequence.GetCurrentPosition() > 0 && grad_sequence.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          grad_sequence.SetMax(grad_sequence.GetTotal());
          grad_sequence.SetCurrentPosition(1);
        }
      }
    }
  }
  inducer_conc = inducer_stock_concentration / (inducer_stock_factor * 1.0);
  labware_id = SeqGetLabwareId(ML_STAR.calc_inducer_gradient);
  {
    loopCounter2 = 0;
    while (
       (ML_STAR.calc_inducer_gradient.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.calc_inducer_gradient, 1);
      loopCounter2 = loopCounter2 + 1;
      {
        for(loopCounter3 = 0; loopCounter3 < 12;)
        {
          loopCounter3 = loopCounter3 + 1;
          well_id = SeqGetPositionId(ML_STAR.calc_inducer_gradient);
          LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, Translate("inducer_conc"), inducer_conc);
          LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, Translate("inducer_id"), inducer_id);
          LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, Translate("inducer_units"), inducer_units);
          SeqIncrement(ML_STAR.calc_inducer_gradient, 1);
        }
      }
      inducer_conc = inducer_conc / (dil_series_factor * 1.0);
      if (
         (ML_STAR.calc_inducer_gradient.GetCurrentPosition() > 0 && ML_STAR.calc_inducer_gradient.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.calc_inducer_gradient.SetMax(ML_STAR.calc_inducer_gradient.GetTotal());
    ML_STAR.calc_inducer_gradient.SetCurrentPosition(1);
  }
  if (use_two_strains == "Yes")
  {
    strain = strain_1_id;
    plasmid = plasmid_1_id;
    SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 48, Translate("strain"), strain);
    SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 48, Translate("plasmid"), plasmid);
    strain = strain_2_id;
    plasmid = plasmid_2_id;
    SeqSetPropertyRange(ML_STAR.Growth_Plate, 49, 96, Translate("strain"), strain);
    SeqSetPropertyRange(ML_STAR.Growth_Plate, 49, 96, Translate("plasmid"), plasmid);
  }
  else
  {
    strain = strain_1_id;
    plasmid = plasmid_1_id;
    SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, Translate("strain"), strain);
    SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, Translate("plasmid"), plasmid);
  }
}

private function SaveWorklistAndMetadata(  ) void {
  private variable row_id;
  private variable well_id;
  private variable plasmid;
  private variable strain;
  private variable position;
  private variable column_id;
  private variable column_id_str;
  private file file1;
  private variable iniFilePath;
  private variable iniDir;
  private variable iniExists;
  private variable loopCounter2;
  private variable inducer_conc;
  private variable additive_conc;
  private variable additive_id;
  private variable additive_units;
  MECC::TraceComment(Translate("**** SaveWorklist sub-method ****"));
  file1.AddField("position", position, hslInteger);
  file1.AddField("well", well_id, hslString, 255);
  file1.AddField("row", row_id, hslString, 255);
  file1.AddField("column", column_id, hslInteger);
  file1.AddField("inducerId", inducer_id, hslString, 255);
  file1.AddField("inducerConcentration", inducer_conc, hslFloat);
  file1.AddField("inducerUnits", inducer_units, hslString, 255);
  file1.AddField("selector1Id", additive_id, hslString, 255);
  file1.AddField("selector1Conc", additive_conc, hslString, 255);
  file1.AddField("selector1Units", additive_units, hslString, 255);
  file1.AddField("strain", strain, hslString, 255);
  file1.AddField("plasmid", plasmid, hslString, 255);
  file1.SetDelimiter(hslCSVDelimited);
  if( 0 == file1.Open(worklist_file_path, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, worklist_file_path, "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    ML_STAR.Growth_Plate.SetCurrentPosition(1);
    while (
       (ML_STAR.Growth_Plate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.Growth_Plate, 1);
      loopCounter2 = loopCounter2 + 1;
      position = ML_STAR.Growth_Plate.GetCurrentPosition();
      well_id = SeqGetPositionId(ML_STAR.Growth_Plate);
      row_id = StrLeft(well_id, 1);
      column_id_str = StrMid(well_id, 1, 2);
      column_id = StrIVal(column_id_str);
      inducer_conc = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("inducer_conc"));
      additive_conc = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("additive_conc"));
      additive_id = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("additive_id"));
      additive_units = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("additive_units"));
      strain = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("strain"));
      plasmid = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("plasmid"));
      if( 0 == file1.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      SeqIncrement(ML_STAR.Growth_Plate, 1);
      if (
         (ML_STAR.Growth_Plate.GetCurrentPosition() > 0 && ML_STAR.Growth_Plate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.Growth_Plate.SetMax(ML_STAR.Growth_Plate.GetTotal());
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  iniDir = HSLExtensions::File::GetDirectoryName(worklist_file_path);
  iniFilePath = iniDir + "\\schema.ini";
  iniExists = HSLExtensions::File::Exists(iniFilePath);
  if (iniExists == 1)
  {
    HSLExtensions::File::Delete(iniFilePath);
  }
}

private function GetParams(  ) void {
  private variable param_dict;
  private variable loc;
  private variable read_line;
  private file file1;
  private variable split_line[];
  private variable inducer_conc_str;
  private variable loopCounter2;
  private variable culture_volume_str;
  private variable dilution_factor_str;
  private variable plate_num_str;
  private variable add_conc_str;
  private variable dilution_series_str;
  param_dict = "param_dict";
  HSLExtensions::Dictionary::CreateDictionary(param_dict, 2);
  file1.AddField(1, read_line, hslString);
  file1.SetDelimiter(hslAsciiText);
  if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    while (
       (file1.Eof() == 0)
    )
    {
      loopCounter2 = loopCounter2 + 1;
      if( 0 == file1.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      loc = StrFind(read_line, ",");
      if (loc > 0)
      {
        split_line = HSLExtensions::String::Split(read_line, Translate(","), 1);
        HSLExtensions::Dictionary::AddItem(param_dict, split_line.ElementAt( 1 -1), split_line.ElementAt( 2 -1));
      }
    }
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  worklist_file_path = HSLExtensions::Dictionary::GetItem(param_dict, Translate("worklistFile"));
  strain_1_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("strain1"));
  plasmid_1_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("plasmid1"));
  inducer_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer"));
  inducer_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducerStockConc"));
  inducer_stock_concentration = StrFVal(inducer_conc_str);
  inducer_units = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducerStockUnits"));
  additive_1_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("leftAdditive"));
  add_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("leftAdditiveStockConc"));
  additive_1_stock_concentration = StrFVal(add_conc_str);
  additive_1_units = HSLExtensions::Dictionary::GetItem(param_dict, Translate("leftAdditiveStockUnits"));
  additive_2_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("rightAdditive"));
  add_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("rightAdditiveStockConc"));
  additive_2_stock_concentration = StrFVal(add_conc_str);
  additive_2_units = HSLExtensions::Dictionary::GetItem(param_dict, Translate("rightAdditiveStockUnits"));
  is_pipetting = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isPipetting"));
  is_debugging = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isDebugging"));
  culture_volume_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("cultureVolume"));
  culture_volume = StrFVal(culture_volume_str);
  if (culture_volume > 500)
  {
    culture_volume = 500;
  }
  else
  {
    if (culture_volume < 200)
    {
      culture_volume = 200;
    }
  }
  dilution_factor_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("dilutionFactor"));
  dilution_factor = StrFVal(dilution_factor_str);
  dilution_series_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("dilutionSeriesFactor"));
  dil_series_factor = StrFVal(dilution_series_str);
  plate_num_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("plateNum"));
  plate_number = StrIVal(plate_num_str);
  sequence_number = plate_number - 1;
  use_two_strains = HSLExtensions::Dictionary::GetItem(param_dict, Translate("useTwoStrains"));
  strain_2_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("strain2"));
  plasmid_2_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("plasmid2"));
  antibiotic_stock_factor = 5;
  inducer_stock_factor = 10;
}

private function pipette_media( sequence & disp_seq, variable p_vol, variable pre_wet_tips ) void {
  GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from, disp_seq, p_vol, pre_wet_tips, ML_STAR.media_pre_wet_1, ML_STAR.media_pre_wet_2, ML_STAR, ML_STAR.Tips_1000_Channels);
}

private function pipette_inducer( sequence & tip_seq, sequence & asp_seq, sequence & disp_seq, variable p_vol ) void {
  TrcTrace(Translate("pipetting inducer volume: "), p_vol);
  MECC::TraceComment(Translate("**** Pipetting the inducer with the shared \"pipette_selector\" method, since that method does not pick up tips, tips are re-used for the full pipetting sequence *** "));
  GSF_IMS_SHARED_SUBMETHODS::pipette_selector(asp_seq, disp_seq, p_vol, 2, asp_seq, asp_seq, ML_STAR, ML_STAR.Tips_300_Channels);
}

private function pipette_dil_series( sequence & from_seq, sequence & to_seq, variable p_vol, variable m_vol, variable number_channels ) void {
  GSF_IMS_SHARED_SUBMETHODS::pipette_dil_series(from_seq, to_seq, p_vol, m_vol, number_channels, ML_STAR, ML_STAR.Tips_1000_Channels);
}

private function pipette_selector( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable pre_wet_tips, sequence & pre_wet_1, sequence & pre_wet_2 ) void {
  TrcTrace(Translate("pipetting selector volume: "), p_vol);
  MECC::TraceComment(Translate("**** Pipetting the selector with the shared \"pipette_inducer\" method, since that method picks up new tips for each column *** "));
  GSF_IMS_SHARED_SUBMETHODS::pipette_inducer(asp_seq, disp_seq, p_vol, ML_STAR, ML_STAR.Tips_300_Channels);
}
