 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLExtensions\\Sequence.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
#include "Double 2D Gradient.res"
variable inducer_stock_concentration;
variable additive_left_concentration;
variable additive_right_concentration;
variable additive_left_units;
variable additive_left_id;
variable additive_right_id;
variable inducer_id;
variable inducer_units;
variable additive_right_units;
variable plasmid_1_id;
variable worklist_file_path;
variable strain_1_id;
variable strain_str;
variable ind_conc_str;
variable right_add_conc_str;
variable left_add_conc_str;
variable plasmid_str;
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable culture_volume;
variable pipette_volume;
variable mix_volume;
variable is_debugging;
dialog dialogHandle_1;
dialog dialogHandle_2;
dialog dialogHandle_3;
variable extra_pipette_volume;
variable dilution_factor;
variable media_volume;
variable cell_volume;
variable ind_volume;
variable pipette_multiplier;
global device ML_STAR ("Double 2D Gradient.lay", "ML_STAR", hslTrue);
dialog dialogHandle_4;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    private variable loopCounter2;
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("*********************************************************************************************************************\n1D gradient plate prep\nHighest inducer concentration in the plate is 1/5th the stock conenctration\n*********************************************************************************************************************"));
    GetParams();
    StartUp();
    PLATEANDLIDMOVEMENT::MoveLidNoTap(ML_STAR.Lid_parking_Old_Growth_Plate, ML_STAR.Waste_Growth_Plate_Lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_source_lid, ML_STAR.Lid_parking_Media_trough, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate\n=============================================================="));
    dilution_factor = 10;
    cell_volume = culture_volume / (dilution_factor * 1.0);
    media_volume = culture_volume - cell_volume;
    TrcTrace(Translate("dilution_factor: "), dilution_factor);
    TrcTrace(Translate("cell_volume: "), cell_volume);
    TrcTrace(Translate("media_volume: "), media_volume);
    pipette_multiplier = culture_volume / (500 * 1.0);
    pipette_volume = media_volume;
    ind_volume = 0.4 * culture_volume;
    extra_pipette_volume = media_volume - ind_volume;
    if (is_pipetting == "true")
    {
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      {
        sequence arrseqAspirate_5[];
        sequence arrseqDispense_5[];
        arrseqAspirate_5.SetSize(1);
        arrseqAspirate_5.SetAt(0, ML_STAR.Media_source);
        arrseqDispense_5.SetSize(1);
        arrseqDispense_5.SetAt(0, ML_STAR.Media_dispense);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 5);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 11);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseSubmergeDepth", 0);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
        PTL::SetPipettingState("DispenseFluidHeight", 5);
        PTL::SetPipettingState("DispenseMode", 3);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslFalse);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_5, arrseqDispense_5, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, ML_STAR.Media_dispense) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
      {
        sequence arrseqAspirate_6[];
        sequence arrseqDispense_6[];
        arrseqAspirate_6.SetSize(1);
        arrseqAspirate_6.SetAt(0, ML_STAR.Media_source);
        arrseqDispense_6.SetSize(1);
        arrseqDispense_6.SetAt(0, ML_STAR.extra_media);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 5);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 11);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseSubmergeDepth", 2);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
        PTL::SetPipettingState("DispenseFluidHeight", 0);
        PTL::SetPipettingState("DispenseMode", 3);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_6, arrseqDispense_6, 1, 1, extra_pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, ML_STAR.extra_media) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_1.SetOutput(Translate("media into growth plate"), "\n", Translate("media into Abgene plate"), "\n");
        dialogHandle_1.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Media_trough, ML_STAR.Media_source_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nDilute inducer (e.g. IPTG) stock into IPTG_1x wells\n=============================================================="));
    if (is_pipetting == "true")
    {
      {
        sequence arrseqAspirate_7[];
        sequence arrseqDispense_7[];
        arrseqAspirate_7.SetSize(1);
        arrseqAspirate_7.SetAt(0, ML_STAR.IPTG_10x_stock);
        arrseqDispense_7.SetSize(1);
        arrseqDispense_7.SetAt(0, ML_STAR.IPTG_1x);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 5);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 11);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseSubmergeDepth", 2);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
        PTL::SetPipettingState("DispenseFluidHeight", 0);
        PTL::SetPipettingState("DispenseMode", 3);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_300_Channels, arrseqAspirate_7, arrseqDispense_7, 1, 1, ind_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.IPTG_10x_stock, ML_STAR.IPTG_1x) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_2.SetOutput(Translate("Reagent stock plate to Abgene plate"), "\n");
        dialogHandle_2.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nPipete inducer dilution gradient\n=============================================================="));
    if (is_pipetting == "true")
    {
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      pipette_volume = media_volume * 1;
      mix_volume = pipette_multiplier * 800;
      {
        loopCounter2 = 0;
        while (
           (ML_STAR.plate2_IPTG_dil_to.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.plate2_IPTG_dil_from, 1, ML_STAR.plate2_IPTG_dil_to, 1);
          loopCounter2 = loopCounter2 + 1;
          ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
          ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
          if (
             (ML_STAR.plate2_IPTG_dil_to.GetCurrentPosition() > 0 && ML_STAR.plate2_IPTG_dil_to.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.plate2_IPTG_dil_from.SetMax(ML_STAR.plate2_IPTG_dil_from.GetTotal());
        ML_STAR.plate2_IPTG_dil_to.SetMax(ML_STAR.plate2_IPTG_dil_to.GetTotal());
        ML_STAR.plate2_IPTG_dil_from.SetCurrentPosition(1);
        ML_STAR.plate2_IPTG_dil_to.SetCurrentPosition(1);
      }
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      COMMON96HEADSUBMETHODS::Eject96HeadTips(ML_STAR, ML_STAR.eject_row_96_clear_seq);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_3.SetOutput(Translate("Growth plate and Abgene plate"), "\n");
        dialogHandle_3.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    MECC::TraceComment(Translate("==============================================================\nPipette cells into growth plate.\n=============================================================="));
    if (is_pipetting == "true")
    {
      pipette_volume = culture_volume / (dilution_factor * 1.0);
      {
        sequence arrseqAspirate_8[];
        sequence arrseqDispense_8[];
        arrseqAspirate_8.SetSize(1);
        arrseqAspirate_8.SetAt(0, ML_STAR.Bacteria_Stock_1);
        arrseqDispense_8.SetSize(1);
        arrseqDispense_8.SetAt(0, ML_STAR.Bacteria_dispense);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 5);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 11);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
        PTL::SetPipettingState("AspiratePrerinsingMixPosition", 8);
        PTL::SetPipettingState("AspiratePrerinsingMixVolume", 800);
        PTL::SetPipettingState("DispenseSubmergeDepth", 0);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
        PTL::SetPipettingState("DispenseFluidHeight", 5);
        PTL::SetPipettingState("DispenseMode", 3);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_8, arrseqDispense_8, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Bacteria_Stock_1, ML_STAR.Bacteria_dispense) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_4.SetOutput(Translate("cells into growth plate"), "\n");
        dialogHandle_4.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Lid_parking_Old_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CalculateOutputs();
    SaveWorklistAndMetadata();
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
  } }
