private function CleanUp(  ) void ;
private function GetParams(  ) void ;
private function HHC_Init(  ) void ;
private function HHC_ShutDown(  ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function CleanUp(  ) void {
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR, ML_STAR.clear_96_head_seq);
}

private function StartUp(  ) void {
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
}

private function GetParams(  ) void {
  private variable param_dict;
  private variable loc;
  private variable read_line;
  private file file1;
  private variable split_line[];
  private variable loopCounter2;
  param_dict = "param_dict";
  HSLExtensions::Dictionary::CreateDictionary(param_dict, 2);
  file1.AddField(1, read_line, hslString);
  file1.SetDelimiter(hslAsciiText);
  if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    while (
       (file1.Eof() == 0)
    )
    {
      loopCounter2 = loopCounter2 + 1;
      if( 0 == file1.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      loc = StrFind(read_line, ",");
      if (loc > 0)
      {
        split_line = HSLExtensions::String::Split(read_line, Translate(","), 1);
        HSLExtensions::Dictionary::AddItem(param_dict, split_line.ElementAt( 1 -1), split_line.ElementAt( 2 -1));
      }
    }
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  set_temperature = 47.0;
  preheat_time = 600;
}

private function HHC_Init(  ) void {
  private variable _HHC_ComPort;
  private variable min_temperature;
  private variable max_temperature;
  private variable _HHC_KeepAlive;
  private variable HHC_SN_arr[];
  private variable _HHC_index;
  private timer timer2;
  private variable _HHC_SN;
  private dialog dialogHandle_1;
  MECC::TraceComment(Translate("*********************************************************************\nRunning HHC Init"));
  _blnSimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
  if (_blnSimulationMode == 1)
  {
    dialogHandle_1.SetOutput(Translate("Init HHC Simulation Mode"));
    dialogHandle_1.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  else
  {
    _HHC_ComPort = "COM8";
    _HHC_index = 1;
    _HHC_KeepAlive = 300;
    HamiltonHeaterCooler::Connect(_HHC_ComPort, _HHC_KeepAlive, HHC_1, HHC_SN_arr);
    _HHC_SN = HHC_SN_arr.ElementAt( _HHC_index -1);
    TrcTrace(Translate("Setting temperature for HHC SN: "), _HHC_SN);
    if( 0 == timer2.SetTimer(60) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    max_temperature = set_temperature + 0.5;
    min_temperature = set_temperature - 2;
    HamiltonHeaterCooler::SetTemperature(_HHC_SN, min_temperature, max_temperature, set_temperature, HamiltonHeaterCooler::_TRUE, 50);
    if( 0 == timer2.WaitTimer(hslTrue, hslFalse) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
  }
  MECC::TraceComment(Translate("HHC Init Done\n*********************************************************************"));
}

private function HHC_ShutDown(  ) void {
  private dialog dialogHandle_2;
  if (_blnSimulationMode == 1)
  {
    dialogHandle_2.SetOutput(Translate("HHC Shut Down, Simulation Mode"));
    dialogHandle_2.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  else
  {
    HamiltonHeaterCooler::Disconnect(HHC_1);
  }
}
