private function CleanUp(  ) void ;
private function GetParams(  ) void ;
private function StartUp(  ) void ;
private function pipette_media( sequence & disp_seq, variable p_vol, variable pre_wet_tips ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function CleanUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        TipCount::Write2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        TipCount::Write2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        TipCount::Write2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 4)
      {
        TipCount::Write2(ML_STAR.Tips_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR, ML_STAR.clear_96_head_seq);
}

private function StartUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  TIP_HANDLING_WITH_96_HEAD::GetTipCounters(tip_counter_array, 1);
  tip_seq_arr.SetSize(0);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_300_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_50_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_Offset_pickup);
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 4)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
}

private function GetParams(  ) void {
  private variable param_dict;
  private variable loc;
  private variable read_line;
  private file file1;
  private variable split_line[];
  private variable loopCounter2;
  private variable culture_volume_str;
  private variable key_exists;
  private variable media_volume_str;
  param_dict = "param_dict";
  HSLExtensions::Dictionary::CreateDictionary(param_dict, 2);
  file1.AddField(1, read_line, hslString);
  file1.SetDelimiter(hslAsciiText);
  if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    while (
       (file1.Eof() == 0)
    )
    {
      loopCounter2 = loopCounter2 + 1;
      if( 0 == file1.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      loc = StrFind(read_line, ",");
      if (loc > 0)
      {
        split_line = HSLExtensions::String::Split(read_line, Translate(","), 1);
        HSLExtensions::Dictionary::AddItem(param_dict, split_line.ElementAt( 1 -1), split_line.ElementAt( 2 -1));
      }
    }
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  culture_volume_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("cultureVolume"));
  culture_volume = StrFVal(culture_volume_str);
  if (culture_volume > 500)
  {
    culture_volume = 500;
  }
  else
  {
    if (culture_volume < 200)
    {
      culture_volume = 200;
    }
  }
  key_exists = HSLExtensions::Dictionary::ExistsItem(param_dict, "mediaVolume");
  if (key_exists == 1)
  {
    media_volume_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("mediaVolume"));
    media_volume = StrFVal(media_volume_str);
  }
  else
  {
    media_volume = culture_volume;
  }
}

private function pipette_media( sequence & disp_seq, variable p_vol, variable pre_wet_tips ) void {
  GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from, disp_seq, p_vol, pre_wet_tips, ML_STAR.media_pre_wet_1, ML_STAR.media_pre_wet_2, ML_STAR, ML_STAR.Tips_1000_Channels);
}
