 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Directory.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLTimLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
#include "Double 2D Gradient.res"
global device ML_STAR ("Double 2D Gradient.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    StartUp();
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Old_Growth_Plate, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLidNoTap(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Growth_Plate_waste, ML_STAR.Growth_Plate_waste_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLidNoTap(ML_STAR.Move_Old_Growth_Plate_park, ML_STAR.Old_Growth_Plate_parking_lid, ML_STAR.Growth_Plate_waste, ML_STAR.Growth_Plate_waste_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
  } }
