private function CleanUp(  ) void ;
private function GetParams(  ) void ;
private function StartUp(  ) void ;
private function ThermoShakeInit(  ) void ;
private function ThermoShakeShutDown(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function CleanUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  if(0){
    array_length=tip_counter_array.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < array_length;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (loopCounter1 == 1)
        {
          TipCount::Write2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
        }
        if (loopCounter1 == 2)
        {
          TipCount::Write2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
        }
        if (loopCounter1 == 3)
        {
          TipCount::Write2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
        }
        if (loopCounter1 == 4)
        {
          TipCount::Write2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
        }
      }
    }
  }
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR);
}

private function StartUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  if(0){
    TIP_HANDLING_WITH_96_HEAD::GetTipCounters(tip_counter_array, 1);
    tip_seq_arr.SetSize(0);
    tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Channels);
    tip_seq_arr.AddAsLast(ML_STAR.Tips_300_Channels);
    tip_seq_arr.AddAsLast(ML_STAR.Tips_50_Channels);
    tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Offset_pickup);
    array_length=tip_counter_array.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < array_length;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (loopCounter1 == 1)
        {
          TipCount::Read2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
        }
        if (loopCounter1 == 2)
        {
          TipCount::Read2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
        }
        if (loopCounter1 == 3)
        {
          TipCount::Read2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
        }
        if (loopCounter1 == 4)
        {
          TipCount::Read2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
        }
      }
    }
  }
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
}

private function GetParams(  ) void {
  private variable param_dict;
  private variable loc;
  private variable read_line;
  private file file1;
  private variable split_line[];
  private variable loopCounter2;
  private variable front_str;
  param_dict = "param_dict";
  HSLExtensions::Dictionary::CreateDictionary(param_dict, 2);
  file1.AddField(1, read_line, hslString);
  file1.SetDelimiter(hslAsciiText);
  if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    while (
       (file1.Eof() == 0)
    )
    {
      loopCounter2 = loopCounter2 + 1;
      if( 0 == file1.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      loc = StrFind(read_line, ",");
      if (loc > 0)
      {
        split_line = HSLExtensions::String::Split(read_line, Translate(","), 1);
        HSLExtensions::Dictionary::AddItem(param_dict, split_line.ElementAt( 1 -1), split_line.ElementAt( 2 -1));
      }
    }
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  set_temperature = 47.0;
  preheat_time = 600;
  front_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("front"));
  front_channel = StrIVal(front_str);
  front_channel = front_channel % 7;
  front_channel = front_channel + 2;
}

private function ThermoShakeInit(  ) void {
  private variable strThermoshakeErrorCode;
  private variable reservoirStatus;
  private dialog dialogHandle2;
  private dialog dialogHandle_1;
  private dialog dialogHandle_2;
  private dialog dialogHandle_3;
  private dialog dialogHandle_4;
  private dialog dialogHandle_5;
  _blnSimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
  if (_blnSimulationMode == 1)
  {
    dialogHandle2.SetOutput(Translate("Init ThermoShake Simulation Mode"));
    dialogHandle2.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  else
  {
    _intThermoshakeControlID = 0;
    TrcTrace(Translate("_intThermoshakeControlID = "), _intThermoshakeControlID);
    _intThermoshakeDeviceID = 1;
    TrcTrace(Translate("_intThermoshakeDeviceID = "), _intThermoshakeDeviceID);
    blnThermoshakeSuccess = HSLInhecoTECLib::Initialize(_intThermoshakeControlID, _blnSimulationMode, strThermoshakeErrorCode);
    if (blnThermoshakeSuccess == 0)
    {
      dialogHandle_3.SetOutput(Translate("Thremoshake error on init"));
      dialogHandle_3.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      abort;
    }
    blnThermoshakeSuccess = HSLInhecoTECLib::GetReservoirStatus(_intThermoshakeControlID, _intThermoshakeDeviceID, reservoirStatus, strThermoshakeErrorCode);
    if (blnThermoshakeSuccess == 0)
    {
      dialogHandle_2.SetOutput(Translate("Thremoshake error"));
      dialogHandle_2.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      abort;
    }
    if (reservoirStatus == 0)
    {
      dialogHandle_1.SetOutput(Translate("Please fill the ThermoShake reservoir"), "\n", Translate("Reservoir status: "), reservoirStatus);
      dialogHandle_1.ShowOutput(Translate("ThermoShake Reservoir Low"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      abort;
    }
    blnThermoshakeSuccess = HSLInhecoTECLib::SetTargetTemperature(_intThermoshakeControlID, _intThermoshakeDeviceID, set_temperature, strThermoshakeErrorCode);
    if (blnThermoshakeSuccess == 0)
    {
      dialogHandle_4.SetOutput(Translate("Thremoshake error: "), "\n", strThermoshakeErrorCode);
      dialogHandle_4.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      abort;
    }
    blnThermoshakeSuccess = HSLInhecoTECLib::StartTemperatureControl(_intThermoshakeControlID, _intThermoshakeDeviceID, strThermoshakeErrorCode);
    if (blnThermoshakeSuccess == 0)
    {
      dialogHandle_5.SetOutput(Translate("Thremoshake error: "), "\n", strThermoshakeErrorCode);
      dialogHandle_5.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      abort;
    }
  }
}

private function ThermoShakeShutDown(  ) void {
  private variable strThermoshakeErrorCode;
  private dialog dialogHandle_6;
  private dialog dialogHandle1;
  if (_blnSimulationMode == 1)
  {
    dialogHandle1.SetOutput(Translate("ThermoShake Shut Down, Simulation Mode"));
    dialogHandle1.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  else
  {
    blnThermoshakeSuccess = HSLInhecoTECLib::StopTemperatureControl(_intThermoshakeControlID, _intThermoshakeDeviceID, strThermoshakeErrorCode);
    if (blnThermoshakeSuccess == 0)
    {
      dialogHandle_6.SetOutput(Translate("Thremoshake error on init"));
      dialogHandle_6.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      abort;
    }
    HSLInhecoTECLib::Terminate(1);
  }
}
