 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLExtensions\\Sequence.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
#include "Fitness Selection 1.res"
variable inducer_stock_concentration;
variable inducer_id;
variable inducer_units;
variable plasmid_1_id;
variable worklist_file_path;
variable strain_1_id;
variable strain_str;
variable plasmid_str;
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable culture_volume;
variable pipette_volume;
variable is_debugging;
dialog dialogHandle_1;
variable dilution_factor;
variable media_volume;
variable cell_volume;
global device ML_STAR ("Fitness Selection 1.lay", "ML_STAR", hslTrue);
variable additive_stock_concentration;
variable additive_id;
variable additive_units;
variable sequence_number;
variable pipette_multiplier;
dialog dialogHandle1;
dialog dialogHandle2;
dialog dialogHandle_2;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("==============================================================\nThis method used for testing; int just fills a growth plate with media (or water)\n\nIt does not move or de-lid plates\n\nIt uses 8 1000 uL tips\n=============================================================="));
    StartUp();
    dialogHandle_2.SetOutput(Translate("Make sure media reservoir and growth plate are in position and without lids."));
    dialogHandle_2.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    dialogHandle1.SetInputSize(1);
    dialogHandle1.SetInputField(0, Translate("media volume?"), hslFloat, 450, 0, 500);
    dialogHandle1.ShowInput("", hslInfinite, hslOKOnly | hslDefButton1);
    media_volume = dialogHandle1.GetInputField(0);
    MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate\n=============================================================="));
    pipette_volume = media_volume;
    {
      sequence arrseqAspirate_3[];
      sequence arrseqDispense_3[];
      arrseqAspirate_3.SetSize(1);
      arrseqAspirate_3.SetAt(0, ML_STAR.Media_source);
      arrseqDispense_3.SetSize(1);
      arrseqDispense_3.SetAt(0, ML_STAR.Media_dispense);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslFalse);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 6);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslFalse);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_3, arrseqDispense_3, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, ML_STAR.Media_dispense) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
  } }
