 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLExtensions\\Directory.hsl" }
 namespace _Method { #include "HSLTimLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
#include "GSF-IMS Project\\E. coli Methods\\Cell growth and pellet for FISH\\Cell growth and pellet.res"
variable inducer_stock_concentration;
variable inducer_id;
variable inducer_units;
variable plasmid_1_id;
variable worklist_file_path;
variable strain_1_id;
variable strain_str;
variable plasmid_str;
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable culture_volume;
variable pipette_volume;
variable media_used;
variable next_media;
variable is_debugging;
dialog dialogHandle_1;
dialog dialogHandle_2;
variable additive_id;
variable additive_units;
variable additive_stock_concentration;
variable plasmid_2_id;
variable strain_2_id;
global device ML_STAR ("GSF-IMS Project\\E. coli Methods\\Cell growth and pellet for FISH\\Cell growth and pellet.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("==========================================================================================\nThis method used for preparing plate 1, with just media and bacteria in all the wells, for growth to stationary phase.\nIt pipettes media from two different stocks, for testing two different clones of the same strain and plasmid\n\nIt uses 16 1000 uL tips\n=========================================================================================="));
    GetParams();
    StartUp();
    media_used = 0;
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_source_lid, ML_STAR.Lid_parking_Media_trough, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate.\n=============================================================="));
    if (is_pipetting == "true")
    {
      pipette_volume = culture_volume * 0.9;
      {
        sequence arrseqAspirate_3[];
        sequence arrseqDispense_3[];
        arrseqAspirate_3.SetSize(1);
        arrseqAspirate_3.SetAt(0, ML_STAR.Media_source);
        arrseqDispense_3.SetSize(1);
        arrseqDispense_3.SetAt(0, ML_STAR.Media_dispense);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 5);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 11);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseSubmergeDepth", 0);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
        PTL::SetPipettingState("DispenseFluidHeight", 6);
        PTL::SetPipettingState("DispenseMode", 1);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_3, arrseqDispense_3, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, ML_STAR.Media_dispense) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
      next_media = pipette_volume * 96;
      media_used = media_used + next_media;
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_1.SetOutput(Translate("media into growth plate"), "\n");
        dialogHandle_1.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Media_trough, ML_STAR.Media_source_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nPipette cells into growth plate.\nColumn 1 is from the first control strain (e.g. pAN1201); columns 2-12 are from the IMS construct.\n=============================================================="));
    if (is_pipetting == "true")
    {
      pipette_volume = culture_volume * 0.1;
      {
        sequence arrseqAspirate_4[];
        sequence arrseqDispense_4[];
        arrseqAspirate_4.SetSize(1);
        arrseqAspirate_4.SetAt(0, ML_STAR.Bacteria_Stock_1);
        arrseqDispense_4.SetSize(1);
        arrseqDispense_4.SetAt(0, ML_STAR.Bacteria_dispense_1);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 5);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 11);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
        PTL::SetPipettingState("AspiratePrerinsingMixPosition", 8);
        PTL::SetPipettingState("AspiratePrerinsingMixVolume", 800);
        PTL::SetPipettingState("DispenseSubmergeDepth", 0);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
        PTL::SetPipettingState("DispenseFluidHeight", 5);
        PTL::SetPipettingState("DispenseMode", 3);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_4, arrseqDispense_4, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Bacteria_Stock_1, ML_STAR.Bacteria_dispense_1) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
      {
        sequence arrseqAspirate_5[];
        sequence arrseqDispense_5[];
        arrseqAspirate_5.SetSize(1);
        arrseqAspirate_5.SetAt(0, ML_STAR.Bacteria_Stock_2);
        arrseqDispense_5.SetSize(1);
        arrseqDispense_5.SetAt(0, ML_STAR.Bacteria_dispense_2);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 5);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 11);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
        PTL::SetPipettingState("AspiratePrerinsingMixPosition", 8);
        PTL::SetPipettingState("AspiratePrerinsingMixVolume", 800);
        PTL::SetPipettingState("DispenseSubmergeDepth", 0);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
        PTL::SetPipettingState("DispenseFluidHeight", 5);
        PTL::SetPipettingState("DispenseMode", 3);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_5, arrseqDispense_5, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Bacteria_Stock_2, ML_STAR.Bacteria_dispense_2) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_2.SetOutput(Translate("cells into growth plate"), "\n");
        dialogHandle_2.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Lid_parking_Old_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    TrcTrace(Translate("Media used:"), media_used);
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CalculateOutputs();
    SaveWorklistAndMetadata();
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
  } }
