 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
 namespace _Method { #include "GSF-IMS Project\\GSF-IMS.shared_submethods.hs_" }
 namespace _Method { #include "HSLExtensions\\Sequence.hsl" }
#include "Fitness Selection.Align-TF.1.res"
variable plasmid_1_id;
variable worklist_file_path;
variable strain_1_id;
variable strain_str;
variable plasmid_str;
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable culture_volume;
variable mix_volume;
variable is_debugging;
dialog dialogHandle_1;
dialog dialogHandle_2;
variable dilution_factor;
variable media_volume;
variable cell_volume;
variable grad_start_media_volume;
variable sequence_number;
variable inducer_max_volume;
dialog dialogHandle_3;
variable dil_series_factor;
variable dil_series_multiplier;
variable dil_series_transf_vol;
variable grad_waste_media_volume;
sequence Inducer_grad_waste_arr[];
sequence Inducer_dil_13_to_arr[];
sequence Inducer_dil_2_to_arr[];
variable inducer_2_id;
variable inducer_1_id;
variable inducer_1_units;
variable inducer_2_stock_concentration;
variable inducer_2_units;
variable inducer_1_stock_concentration;
variable inducer_ref_volume;
variable tet_ref_volume;
variable with_tet;
variable grad_start_tet_volume;
variable tet_volume;
variable media_volume_no_tet;
variable media_volume_with_tet;
variable plasmid_2_id;
variable plasmid_4_id;
variable plasmid_3_id;
variable first_tet_seq;
variable plate_number;
global device ML_STAR ("Fitness Selection.Align-TF.1.lay", "ML_STAR", hslTrue);
variable grad_start_media_vol_w_tet;
variable additive_2_stock_concentration;
variable additive_1_units;
variable additive_2_units;
variable additive_1_stock_concentration;
variable additive_2_id;
variable additive_1_id;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("==============================================================\n\n=============================================================="));
    GetParams();
    StartUp();
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.ABGene_plate_0002_lid, ML_STAR.Lid_parking_ABGene_plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_source_lid, ML_STAR.Lid_parking_Media_trough, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    Inducer_grad_waste_arr.SetSize(0);
    Inducer_grad_waste_arr.AddAsLast(ML_STAR.inducer_grad_waste_1);
    Inducer_grad_waste_arr.AddAsLast(ML_STAR.inducer_grad_waste_2);
    Inducer_grad_waste_arr.AddAsLast(ML_STAR.inducer_grad_waste_3);
    Inducer_grad_waste_arr.AddAsLast(ML_STAR.inducer_grad_waste_4);
    Inducer_dil_13_to_arr.SetSize(0);
    Inducer_dil_13_to_arr.AddAsLast(ML_STAR.inducer_gradient_13_to_1);
    Inducer_dil_13_to_arr.AddAsLast(ML_STAR.inducer_gradient_13_to_2);
    Inducer_dil_13_to_arr.AddAsLast(ML_STAR.inducer_gradient_13_to_3);
    Inducer_dil_13_to_arr.AddAsLast(ML_STAR.inducer_gradient_13_to_4);
    Inducer_dil_2_to_arr.SetSize(0);
    Inducer_dil_2_to_arr.AddAsLast(ML_STAR.inducer_gradient_2_to_1);
    Inducer_dil_2_to_arr.AddAsLast(ML_STAR.inducer_gradient_2_to_2);
    Inducer_dil_2_to_arr.AddAsLast(ML_STAR.inducer_gradient_2_to_3);
    Inducer_dil_2_to_arr.AddAsLast(ML_STAR.inducer_gradient_2_to_4);
    dil_series_multiplier = dil_series_factor - 1.0;
    dil_series_multiplier = dil_series_factor / (dil_series_multiplier * 1.0);
    cell_volume = culture_volume / (dilution_factor * 1.0);
    media_volume = culture_volume - cell_volume;
    dil_series_transf_vol = media_volume * dil_series_multiplier;
    dil_series_transf_vol = dil_series_transf_vol - media_volume;
    first_tet_seq = 2;
    if (sequence_number < first_tet_seq)
    {
      inducer_ref_volume = culture_volume;
      tet_ref_volume = culture_volume;
      with_tet = 0;
    }
    else
    {
      with_tet = 1;
      if (sequence_number == first_tet_seq)
      {
        inducer_ref_volume = media_volume;
        tet_ref_volume = culture_volume;
      }
      else
      {
        if (sequence_number > first_tet_seq)
        {
          inducer_ref_volume = media_volume;
          tet_ref_volume = media_volume;
        }
      }
    }
    inducer_max_volume = inducer_ref_volume / (2 * 1.0);
    inducer_max_volume = inducer_max_volume * dil_series_multiplier;
    grad_start_media_volume = media_volume * dil_series_multiplier;
    grad_start_media_volume = grad_start_media_volume - inducer_max_volume;
    if (with_tet == 1)
    {
      grad_start_tet_volume = tet_ref_volume / (10 * 1.0);
      grad_start_tet_volume = grad_start_tet_volume * dil_series_multiplier;
      grad_start_media_vol_w_tet = grad_start_media_volume - grad_start_tet_volume;
      tet_volume = tet_ref_volume / (10 * 1.0);
      media_volume_no_tet = media_volume;
      media_volume_with_tet = media_volume - tet_volume;
    }
    else
    {
      grad_start_media_vol_w_tet = grad_start_media_volume - 0;
    }
    grad_waste_media_volume = 200;
    TrcTrace(Translate("dil_series_factor: "), dil_series_factor);
    TrcTrace(Translate("dilution_factor: "), dilution_factor);
    TrcTrace(Translate("cell_volume: "), cell_volume);
    TrcTrace(Translate("media_volume: "), media_volume);
    TrcTrace(Translate("dil_series_transf_vol: "), dil_series_transf_vol);
    TrcTrace(Translate("with_tet: "), with_tet);
    TrcTrace(Translate("tet_volume: "), tet_volume);
    TrcTrace(Translate("sequence_number: "), sequence_number);
    MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate and gradient waste plate\n=============================================================="));
    if (is_pipetting == "true")
    {
      GSF_IMS_SHARED_SUBMETHODS::tip_pickup(ML_STAR.Tips_1000_Channels, 8, ML_STAR);
      if (with_tet == 1)
      {
        GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from, ML_STAR.inducer_zero_at_start_tet, media_volume_with_tet, 1, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
        GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from_7, ML_STAR.inducer_zero_at_start_no_tet, media_volume_no_tet, 0, ML_STAR.Tips_1000_Channels, 7, ML_STAR);
      }
      else
      {
        GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from_7, ML_STAR.inducer_zero_at_start, media_volume, 0, ML_STAR.Tips_1000_Channels, 7, ML_STAR);
      }
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from_4, ML_STAR.inducer_grad_start_no_tet, grad_start_media_volume, 0, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from, ML_STAR.inducer_grad_start_tet, grad_start_media_vol_w_tet, 0, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from, Inducer_grad_waste_arr.ElementAt( sequence_number -1), grad_waste_media_volume, 0, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::tip_eject(8, ML_STAR);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_1.SetOutput(Translate("media into growth plate"), "\n", Translate("media into Abgene plate"), "\n");
        dialogHandle_1.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Media_trough, ML_STAR.Media_source_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    if (with_tet == 1)
    {
      MECC::TraceComment(Translate("*** Pipette selector 1 stock *****"));
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_reuse_tips(ML_STAR.Selector_1_stock_4, ML_STAR.inducer_grad_start_tet_1, grad_start_tet_volume, 1, ML_STAR.Tips_300_Channels, 4, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_reuse_tips(ML_STAR.Selector_1_stock_4, ML_STAR.inducer_zero_at_start_tet_1, tet_volume, 1, ML_STAR.Tips_300_Channels, 4, ML_STAR);
      MECC::TraceComment(Translate("*** Pipette selector 2 stock *****"));
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_reuse_tips(ML_STAR.Selector_2_stock_4, ML_STAR.inducer_grad_start_tet_2, grad_start_tet_volume, 1, ML_STAR.Tips_300_Channels, 4, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_reuse_tips(ML_STAR.Selector_2_stock_4, ML_STAR.inducer_zero_at_start_tet_2, tet_volume, 1, ML_STAR.Tips_300_Channels, 4, ML_STAR);
    }
    MECC::TraceComment(Translate("==============================================================\nDilute inducer (e.g. IPTG) stock into inducer_grad_start and inducer_contr wells\n=============================================================="));
    if (is_pipetting == "true")
    {
      MECC::TraceComment(Translate("****  pipette inducer to grad_start wells"));
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(ML_STAR.Inducer_1_2x_6, ML_STAR.inducer_1_grad_start, inducer_max_volume, 0, 0, ML_STAR.Tips_1000_Channels, 6, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(ML_STAR.Inducer_2_2x_6, ML_STAR.inducer_2_grad_start, inducer_max_volume, 0, 0, ML_STAR.Tips_1000_Channels, 6, ML_STAR);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_3.SetOutput(Translate("Reagent stock plate to Growth plate"), "\n");
        dialogHandle_3.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nPipete inducer dilution gradients\n=============================================================="));
    if (is_pipetting == "true")
    {
      mix_volume = media_volume * 1;
      GSF_IMS_SHARED_SUBMETHODS::pipette_dil_series(ML_STAR.inducer_gradient_13_from, Inducer_dil_13_to_arr.ElementAt( sequence_number -1), dil_series_transf_vol, 2, mix_volume, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::pipette_dil_series(ML_STAR.inducer_gradient_2_from, Inducer_dil_2_to_arr.ElementAt( sequence_number -1), dil_series_transf_vol, 2, mix_volume, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_2.SetOutput(Translate("Growth plate and Abgene plate"), "\n");
        dialogHandle_2.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    if (plate_number == 1)
    {
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_ABGene_plate, ML_STAR.ABGene_plate_0002_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
      PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Lid_parking_Old_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    }
    else
    {
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_ABGene_plate, ML_STAR.ABGene_plate_0002_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    }
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CalculateOutputs();
    SaveWorklistAndMetadata();
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_ExitLibrary();
  } }
