private function CalculateOutputs(  ) void ;
private function CleanUp(  ) void ;
private function GetParams(  ) void ;
private function SaveWorklistAndMetadata(  ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function CleanUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        TipCount::Write2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        TipCount::Write2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        TipCount::Write2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 4)
      {
        TipCount::Write2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR, ML_STAR.clear_96_head_seq);
}

private function StartUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  TIP_HANDLING_WITH_96_HEAD::GetTipCounters(tip_counter_array, 1);
  tip_seq_arr.SetSize(0);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_300_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_50_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Offset_pickup);
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 4)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
}

private function CalculateOutputs(  ) void {
  private variable inducer_conc;
  private variable well_id;
  private variable labware_id;
  private variable loopCounter3;
  private variable loopCounter2;
  private variable prop_arr[];
  private variable inducer_id;
  private variable inducer_units;
  private variable ind_conc_arr[];
  private variable ind_units_arr[];
  private variable ind_id_arr[];
  private sequence ind_dill_arr[];
  private sequence ind_dill_n;
  private variable ind_num;
  private variable ind_contr_conc;
  private variable loopCounter1;
  private variable additive_1_concentration;
  private variable additive_2_concentration;
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "inducer_conc", 0);
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "inducer_id", "none");
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "inducer_units", "N/A");
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "additive_conc", 0);
  labware_id = "";
  well_id = "";
  ind_conc_arr.SetSize(0);
  ind_conc_arr.AddAsLast(inducer_1_stock_concentration);
  ind_conc_arr.AddAsLast(inducer_2_stock_concentration);
  ind_id_arr.SetSize(0);
  ind_id_arr.AddAsLast(inducer_1_id);
  ind_id_arr.AddAsLast(inducer_2_id);
  ind_units_arr.SetSize(0);
  ind_units_arr.AddAsLast(inducer_1_units);
  ind_units_arr.AddAsLast(inducer_2_units);
  ind_dill_arr.SetSize(0);
  ind_dill_arr.AddAsLast(ML_STAR.inducer_1_calc_dil);
  ind_dill_arr.AddAsLast(ML_STAR.inducer_2_calc_dil);
  {
    for(ind_num = 0; ind_num < 2;)
    {
      ind_num = ind_num + 1;
      inducer_conc = ind_conc_arr.ElementAt( ind_num -1) / (2 * 1.0);
      ind_contr_conc = ind_conc_arr.ElementAt( ind_num -1) / (8 * 1.0);
      inducer_id = ind_id_arr.ElementAt( ind_num -1);
      inducer_units = ind_units_arr.ElementAt( ind_num -1);
      labware_id = SeqGetLabwareId(ind_dill_arr.ElementAt( ind_num -1));
      ind_dill_n=ind_dill_arr.GetAt(ind_num-1);
      {
        loopCounter2 = 0;
        while (
           (ind_dill_n.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ind_dill_n, 1);
          loopCounter2 = loopCounter2 + 1;
          {
            for(loopCounter3 = 0; loopCounter3 < 6;)
            {
              loopCounter3 = loopCounter3 + 1;
              well_id = SeqGetPositionId(ind_dill_n);
              LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, Translate("inducer_conc"), inducer_conc);
              LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, "inducer_id", inducer_id);
              LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, Translate("inducer_units"), inducer_units);
              SeqIncrement(ind_dill_n, 1);
            }
          }
          inducer_conc = inducer_conc / (dil_series_factor * 1.0);
          if (
             (ind_dill_n.GetCurrentPosition() > 0 && ind_dill_n.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ind_dill_n.SetMax(ind_dill_n.GetTotal());
        ind_dill_n.SetCurrentPosition(1);
      }
    }
  }
  if (with_tet == 1)
  {
    additive_1_concentration = additive_1_stock_concentration / (10 * 1.0);
    labware_id = SeqGetLabwareId(ML_STAR.has_tet_1);
    {
      loopCounter1 = 0;
      ML_STAR.has_tet_1.SetCurrentPosition(1);
      while (
         (ML_STAR.has_tet_1.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.has_tet_1, 1);
        loopCounter1 = loopCounter1 + 1;
        well_id = SeqGetPositionId(ML_STAR.has_tet_1);
        LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, Translate("additive_conc"), additive_1_concentration);
        SeqIncrement(ML_STAR.has_tet_1, 1);
        if (
           (ML_STAR.has_tet_1.GetCurrentPosition() > 0 && ML_STAR.has_tet_1.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.has_tet_1.SetMax(ML_STAR.has_tet_1.GetTotal());
      ML_STAR.has_tet_1.SetCurrentPosition(1);
    }
    additive_2_concentration = additive_2_stock_concentration / (10 * 1.0);
    labware_id = SeqGetLabwareId(ML_STAR.has_tet_2);
    {
      loopCounter1 = 0;
      ML_STAR.has_tet_2.SetCurrentPosition(1);
      while (
         (ML_STAR.has_tet_2.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.has_tet_2, 1);
        loopCounter1 = loopCounter1 + 1;
        well_id = SeqGetPositionId(ML_STAR.has_tet_2);
        LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, Translate("additive_conc"), additive_2_concentration);
        SeqIncrement(ML_STAR.has_tet_2, 1);
        if (
           (ML_STAR.has_tet_2.GetCurrentPosition() > 0 && ML_STAR.has_tet_2.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.has_tet_2.SetMax(ML_STAR.has_tet_2.GetTotal());
      ML_STAR.has_tet_2.SetCurrentPosition(1);
    }
  }
  strain_str = "strain";
  plasmid_str = "plasmid";
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, strain_str, strain_1_id);
  if (plasmid_4_id == "ignore")
  {
    SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, plasmid_str, plasmid_1_id);
  }
  else
  {
    SeqSetPropertyRange(ML_STAR.plasmid_1, 1, 24, plasmid_str, plasmid_1_id);
    SeqSetPropertyRange(ML_STAR.plasmid_2, 1, 24, plasmid_str, plasmid_2_id);
    SeqSetPropertyRange(ML_STAR.plasmid_3, 1, 24, plasmid_str, plasmid_3_id);
    SeqSetPropertyRange(ML_STAR.plasmid_4, 1, 24, plasmid_str, plasmid_4_id);
    prop_arr.SetSize(0);
    prop_arr.AddAsLast(plasmid_str);
    LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.plasmid_1, prop_arr, ML_STAR.Growth_Plate);
    LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.plasmid_2, prop_arr, ML_STAR.Growth_Plate);
    LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.plasmid_3, prop_arr, ML_STAR.Growth_Plate);
    LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.plasmid_4, prop_arr, ML_STAR.Growth_Plate);
  }
}

private function SaveWorklistAndMetadata(  ) void {
  private variable inducer_conc;
  private variable row_id;
  private variable well_id;
  private variable plasmid;
  private variable strain;
  private variable position;
  private variable column_id;
  private variable column_id_str;
  private file file1;
  private variable iniFilePath;
  private variable iniDir;
  private variable iniExists;
  private variable loopCounter2;
  private variable additive_conc;
  private variable inducer_id;
  private variable inducer_units;
  file1.AddField("position", position, hslInteger);
  file1.AddField("well", well_id, hslString, 255);
  file1.AddField("row", row_id, hslString, 255);
  file1.AddField("column", column_id, hslInteger);
  file1.AddField("inducerId", inducer_id, hslString, 255);
  file1.AddField("inducerConcentration", inducer_conc, hslFloat);
  file1.AddField("inducerUnits", inducer_units, hslString, 255);
  file1.AddField("selectorId", additive_1_id, hslString, 255);
  file1.AddField("selectorConc", additive_conc, hslString, 255);
  file1.AddField("selectorUnits", additive_1_units, hslString, 255);
  file1.AddField(strain_str, strain, hslString, 255);
  file1.AddField(plasmid_str, plasmid, hslString, 255);
  file1.SetDelimiter(hslCSVDelimited);
  if( 0 == file1.Open(worklist_file_path, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, worklist_file_path, "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    ML_STAR.Growth_Plate.SetCurrentPosition(1);
    while (
       (ML_STAR.Growth_Plate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.Growth_Plate, 1);
      loopCounter2 = loopCounter2 + 1;
      position = ML_STAR.Growth_Plate.GetCurrentPosition();
      well_id = SeqGetPositionId(ML_STAR.Growth_Plate);
      row_id = StrLeft(well_id, 1);
      column_id_str = StrMid(well_id, 1, 2);
      column_id = StrIVal(column_id_str);
      inducer_conc = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("inducer_conc"));
      inducer_id = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("inducer_id"));
      inducer_units = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("inducer_units"));
      additive_conc = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("additive_conc"));
      strain = SeqGetProperty(ML_STAR.Growth_Plate, position, strain_str);
      plasmid = SeqGetProperty(ML_STAR.Growth_Plate, position, plasmid_str);
      if( 0 == file1.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      SeqIncrement(ML_STAR.Growth_Plate, 1);
      if (
         (ML_STAR.Growth_Plate.GetCurrentPosition() > 0 && ML_STAR.Growth_Plate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.Growth_Plate.SetMax(ML_STAR.Growth_Plate.GetTotal());
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  iniDir = HSLExtensions::File::GetDirectoryName(worklist_file_path);
  iniFilePath = iniDir + "\\schema.ini";
  iniExists = HSLExtensions::File::Exists(iniFilePath);
  if (iniExists == 1)
  {
    HSLExtensions::File::Delete(iniFilePath);
  }
}

private function GetParams(  ) void {
  private variable param_dict;
  private variable loc;
  private variable read_line;
  private file file1;
  private variable split_line[];
  private variable inducer_conc_str;
  private variable loopCounter2;
  private variable culture_volume_str;
  private variable dilution_factor_str;
  private variable plate_num_str;
  private variable add_conc_str;
  private variable dilution_series_str;
  param_dict = "param_dict";
  HSLExtensions::Dictionary::CreateDictionary(param_dict, 2);
  file1.AddField(1, read_line, hslString);
  file1.SetDelimiter(hslAsciiText);
  if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    while (
       (file1.Eof() == 0)
    )
    {
      loopCounter2 = loopCounter2 + 1;
      if( 0 == file1.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      loc = StrFind(read_line, ",");
      if (loc > 0)
      {
        split_line = HSLExtensions::String::Split(read_line, Translate(","), 1);
        HSLExtensions::Dictionary::AddItem(param_dict, split_line.ElementAt( 1 -1), split_line.ElementAt( 2 -1));
      }
    }
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  worklist_file_path = HSLExtensions::Dictionary::GetItem(param_dict, Translate("worklistFile"));
  strain_1_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("strain1"));
  plasmid_1_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("plasmid1"));
  plasmid_2_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("plasmid2"));
  plasmid_3_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("plasmid3"));
  plasmid_4_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("plasmid4"));
  inducer_1_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer1"));
  inducer_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer1StockConc"));
  inducer_1_stock_concentration = StrFVal(inducer_conc_str);
  inducer_1_units = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer1StockUnits"));
  inducer_2_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer2"));
  inducer_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer2StockConc"));
  inducer_2_stock_concentration = StrFVal(inducer_conc_str);
  inducer_2_units = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer2StockUnits"));
  additive_1_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("selector1"));
  add_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("selector1StockConc"));
  additive_1_stock_concentration = StrFVal(add_conc_str);
  additive_1_units = HSLExtensions::Dictionary::GetItem(param_dict, Translate("selector1StockUnits"));
  additive_2_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("selector2"));
  add_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("selector2StockConc"));
  additive_2_stock_concentration = StrFVal(add_conc_str);
  additive_2_units = HSLExtensions::Dictionary::GetItem(param_dict, Translate("selector2StockUnits"));
  is_pipetting = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isPipetting"));
  is_debugging = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isDebugging"));
  culture_volume_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("cultureVolume"));
  culture_volume = StrFVal(culture_volume_str);
  if (culture_volume > 500)
  {
    culture_volume = 500;
  }
  else
  {
    if (culture_volume < 200)
    {
      culture_volume = 200;
    }
  }
  dilution_factor_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("dilutionFactor"));
  dilution_factor = StrFVal(dilution_factor_str);
  plate_num_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("gradPlateNum"));
  sequence_number = StrIVal(plate_num_str);
  dilution_series_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("dilutionSeriesFactor"));
  dil_series_factor = StrFVal(dilution_series_str);
  dil_series_factor = 3;
  plate_num_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("plateNum"));
  plate_number = StrIVal(plate_num_str);
}
