 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLExtensions\\Directory.hsl" }
 namespace _Method { #include "HSLTimLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
 namespace _Method { #include "..\\..\\GSF-IMS.shared_submethods.hs_" }
#include "Fitness Selection.Align-TF.GBA_1.res"
variable inducer_stock_concentration;
variable inducer_id;
variable inducer_units;
variable worklist_file_path;
variable strain_1_id;
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable culture_volume;
variable pipette_volume;
variable is_debugging;
dialog dialogHandle_1;
dialog dialogHandle_2;
variable additive_id;
variable additive_units;
variable additive_stock_concentration;
variable loopCounter1;
variable lineage;
sequence old_GP_lid_park_arr[];
global device ML_STAR ("Fitness Selection.Align-TF.GBA_1.lay", "ML_STAR", hslTrue);
sequence bacteria_stocks_arr[];
sequence bacteria_dispense_arr[];
variable is_clonal_test;
variable plasmid_1_id_arr[];
variable plasmid_2_id_arr[];
variable plasmid_3_id_arr[];
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("==========================================================================================\nThis method used for preparing plate 1, with just media and bacteria in all the wells, for growth to stationary phase.\n\nIt uses 16 1000 uL tips\n=========================================================================================="));
    GetParams();
    StartUp();
    old_GP_lid_park_arr.SetSize(0);
    old_GP_lid_park_arr.AddAsLast(ML_STAR.Lid_parking_Old_Growth_Plate);
    old_GP_lid_park_arr.AddAsLast(ML_STAR.Lid_parking_Old_Growth_Plate_2);
    bacteria_stocks_arr.SetSize(0);
    if (is_clonal_test == "true")
    {
      bacteria_stocks_arr.AddAsLast(ML_STAR.bacteria_stocks_1);
      bacteria_stocks_arr.AddAsLast(ML_STAR.bacteria_stocks_2);
      bacteria_stocks_arr.AddAsLast(ML_STAR.bacteria_stocks_3);
    }
    else
    {
      bacteria_stocks_arr.AddAsLast(ML_STAR.library_stock_1);
      bacteria_stocks_arr.AddAsLast(ML_STAR.library_stock_2);
      bacteria_stocks_arr.AddAsLast(ML_STAR.library_stock_3);
    }
    bacteria_dispense_arr.SetSize(0);
    bacteria_dispense_arr.AddAsLast(ML_STAR.bacteria_dispense_1);
    bacteria_dispense_arr.AddAsLast(ML_STAR.bacteria_dispense_2);
    bacteria_dispense_arr.AddAsLast(ML_STAR.bacteria_dispense_3);
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_source_lid, ML_STAR.Lid_parking_Media_trough, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate.\n=============================================================="));
    if (is_pipetting == "true")
    {
      pipette_volume = culture_volume * 0.9;
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", 0);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
      PTL::SetTipHandlingState("TipCountingIdentifier", "");
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupChannelVariable", "");
      PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
      if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_1000_Channels) )
      {
            PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
      pipette_media(ML_STAR.Media_dispense_all, pipette_volume, 1);
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectChannelVariable", "");
      if( 0 == PTL::TipEject(ML_STAR) )
      {
            PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_1.SetOutput(Translate("media into growth plate"), "\n");
        dialogHandle_1.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Media_trough, ML_STAR.Media_source_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nPipette cells into growth plate.\n=============================================================="));
    if (is_pipetting == "true")
    {
      pipette_volume = culture_volume * 0.1;
      {
        for(loopCounter1 = 0; loopCounter1 < 3;)
        {
          loopCounter1 = loopCounter1 + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          {
            sequence arrseqAspirate_3[];
            sequence arrseqDispense_3[];
            Util2::SeqArrCheckIndex(bacteria_stocks_arr, loopCounter1, "bacteria_stocks_arr");
            Util2::SeqArrCheckIndex(bacteria_stocks_arr, loopCounter1, "bacteria_stocks_arr");
            Util2::SeqArrCheckIndex(bacteria_dispense_arr, loopCounter1, "bacteria_dispense_arr");
            Util2::SeqArrCheckIndex(bacteria_dispense_arr, loopCounter1, "bacteria_dispense_arr");
            arrseqAspirate_3.SetSize(1);
            arrseqAspirate_3.SetAt(0, bacteria_stocks_arr.ElementAt(loopCounter1-1));
            arrseqDispense_3.SetSize(1);
            arrseqDispense_3.SetAt(0, bacteria_dispense_arr.ElementAt(loopCounter1-1));
            PTL::ResetPipettingStateAndSequences("");
            PTL::SetPipettingState("UserResponseTime", hslInfinite);
            PTL::SetPipettingState("ErrorHandling", 3);
            PTL::SetPipettingState("TipCountingEnabled", hslFalse);
            PTL::SetPipettingState("TipCountingIdentifier", "");
            PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
            PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
            PTL::SetPipettingState("CalibrateCarrierChannel", -1);
            PTL::SetPipettingState("InitializeCustomStepID", 0);
            PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
            PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
            PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
            PTL::SetPipettingState("TipPickupCustomStepID", 0);
            PTL::SetPipettingState("TipEjectCustomStepID", 0);
            PTL::SetPipettingState("AspirateCustomStepID", 0);
            PTL::SetPipettingState("DispenseCustomStepID", 0);
            PTL::SetPipettingState("PreDispenseCustomStepID", 0);
            PTL::SetPipettingState("PostDispenseCustomStepID", 0);
            PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
            PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
            PTL::SetPipettingState("InitializeChannelVariable", "");
            PTL::SetPipettingState("InitializeEnabled", hslFalse);
            PTL::SetPipettingState("TipPickupChannelVariable", "");
            PTL::SetPipettingState("TipPickupEnabled", hslFalse);
            PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
            PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
            PTL::SetPipettingState("TipEjectChannelVariable", "");
            PTL::SetPipettingState("AspirateMode", 0);
            PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
            PTL::SetPipettingState("AspirateFluidHeight", 0);
            PTL::SetPipettingState("AspirateSubmergeDepth", 2);
            PTL::SetPipettingState("AspirateChannelVariable", "");
            PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
            PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
            PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
            PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
            PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
            PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
            PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
            PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
            PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
            PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
            PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
            PTL::SetPipettingState("AspiratePrerinsingMixCycles", 2);
            PTL::SetPipettingState("AspiratePrerinsingMixPosition", 8);
            PTL::SetPipettingState("AspiratePrerinsingMixVolume", 800);
            PTL::SetPipettingState("DispenseSubmergeDepth", 2);
            PTL::SetPipettingState("DispenseChannelVariable", "");
            PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
            PTL::SetPipettingState("DispenseFluidHeight", 0);
            PTL::SetPipettingState("DispenseMode", 3);
            PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
            PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
            PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
            PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
            PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
            PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
            PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
            PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
            PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
            PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
            PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
            PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
            if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_3, arrseqDispense_3, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", bacteria_stocks_arr.ElementAt(loopCounter1-1), bacteria_dispense_arr.ElementAt(loopCounter1-1)) )
            {
                  PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
            }
          }
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_2.SetOutput(Translate("cells into growth plate"), "\n");
        dialogHandle_2.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_Handoff_lid, old_GP_lid_park_arr.ElementAt( lineage -1), ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CalculateOutputs();
    SaveWorklistAndMetadata();
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_ExitLibrary();
  } }
