private function CalculateOutputs(  ) void ;
private function CleanUp(  ) void ;
private function GetParams(  ) void ;
private function SaveWorklistAndMetadata(  ) void ;
private function StartUp(  ) void ;
private function pipette_dil_series( sequence & from_seq, sequence & to_seq, variable p_vol, variable m_vol, variable number_channels ) void ;
private function pipette_inducer( sequence & tip_seq, sequence & asp_seq, sequence & disp_seq, variable p_vol ) void ;
private function pipette_media( sequence & disp_seq, variable p_vol, variable pre_wet_tips ) void ;
private function pipette_selector( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable pre_wet_tips, sequence & pre_wet_1, sequence & pre_wet_2 ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function CleanUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        TipCount::Write2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        TipCount::Write2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        TipCount::Write2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 4)
      {
        TipCount::Write2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR, ML_STAR.clear_96_head_seq);
}

private function StartUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  TIP_HANDLING_WITH_96_HEAD::GetTipCounters(tip_counter_array, 1);
  tip_seq_arr.SetSize(0);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_300_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_50_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Offset_pickup);
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 4)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
}

private function CalculateOutputs(  ) void {
  private variable prop_arr[];
  private variable int_seq_len;
  private variable flt_conc;
  private variable plas_num;
  private sequence add_tmp_seq_arr[];
  private variable tmp_seq_num;
  private sequence add_ind_seq_arr[];
  private sequence plasmid_3_seq_arr[];
  private sequence plasmid_2_seq_arr[];
  private sequence plasmid_1_seq_arr[];
  MECC::TraceComment(Translate("**** Start CalculateOutputs sub-method ****"));
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "inducer_conc", 0);
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "inducer_id", "none");
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "inducer_units", "none");
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "additive_conc", 0);
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "additive_id", "none");
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "additive_units", "none");
  add_tmp_seq_arr.SetSize(0);
  add_tmp_seq_arr.AddAsLast(ML_STAR.add_tmp_1);
  add_tmp_seq_arr.AddAsLast(ML_STAR.add_tmp_2);
  add_tmp_seq_arr.AddAsLast(ML_STAR.add_tmp_3);
  prop_arr.SetSize(0);
  prop_arr.AddAsLast(Translate("additive_id"));
  prop_arr.AddAsLast(Translate("additive_conc"));
  prop_arr.AddAsLast(Translate("additive_units"));
  {
    for(tmp_seq_num = 0; tmp_seq_num < 3;)
    {
      tmp_seq_num = tmp_seq_num + 1;
      int_seq_len = SeqGetTotal(add_tmp_seq_arr.ElementAt( tmp_seq_num -1));
      SeqSetPropertyRange(add_tmp_seq_arr.ElementAt( tmp_seq_num -1), 1, int_seq_len, Translate("additive_id"), tmp_id_arr.ElementAt( tmp_seq_num -1));
      flt_conc = tmp_conc_arr.ElementAt( tmp_seq_num -1) / (10 * 1.0);
      SeqSetPropertyRange(add_tmp_seq_arr.ElementAt( tmp_seq_num -1), 1, int_seq_len, Translate("additive_conc"), flt_conc);
      SeqSetPropertyRange(add_tmp_seq_arr.ElementAt( tmp_seq_num -1), 1, int_seq_len, Translate("additive_units"), tmp_units_arr.ElementAt( tmp_seq_num -1));
      LMSF_UTILITIES::SeqCopyPropsFromShortSeq(add_tmp_seq_arr.ElementAt( tmp_seq_num -1), prop_arr, ML_STAR.Growth_Plate);
    }
  }
  add_ind_seq_arr.SetSize(0);
  add_ind_seq_arr.AddAsLast(ML_STAR.add_ind_1);
  add_ind_seq_arr.AddAsLast(ML_STAR.add_ind_2);
  add_ind_seq_arr.AddAsLast(ML_STAR.add_ind_3);
  prop_arr.SetSize(0);
  prop_arr.AddAsLast(Translate("inducer_id"));
  prop_arr.AddAsLast(Translate("inducer_conc"));
  prop_arr.AddAsLast(Translate("inducer_units"));
  {
    for(tmp_seq_num = 0; tmp_seq_num < 3;)
    {
      tmp_seq_num = tmp_seq_num + 1;
      int_seq_len = SeqGetTotal(add_ind_seq_arr.ElementAt( tmp_seq_num -1));
      TrcTrace(Translate("int_seq_len: "), int_seq_len);
      SeqSetPropertyRange(add_ind_seq_arr.ElementAt( tmp_seq_num -1), 1, int_seq_len, Translate("inducer_id"), inducer_id_arr.ElementAt( tmp_seq_num -1));
      flt_conc = inducer_conc_arr.ElementAt( tmp_seq_num -1) / (2 * 1.0);
      SeqSetPropertyRange(add_ind_seq_arr.ElementAt( tmp_seq_num -1), 1, int_seq_len, Translate("inducer_conc"), flt_conc);
      SeqSetPropertyRange(add_ind_seq_arr.ElementAt( tmp_seq_num -1), 1, int_seq_len, Translate("inducer_units"), inducer_units_arr.ElementAt( tmp_seq_num -1));
      LMSF_UTILITIES::SeqCopyPropsFromShortSeq(add_ind_seq_arr.ElementAt( tmp_seq_num -1), prop_arr, ML_STAR.Growth_Plate);
    }
  }
  plasmid_1_seq_arr.SetSize(0);
  plasmid_1_seq_arr.AddAsLast(ML_STAR.plasmid_1_1);
  plasmid_1_seq_arr.AddAsLast(ML_STAR.plasmid_1_2);
  plasmid_1_seq_arr.AddAsLast(ML_STAR.plasmid_1_3);
  plasmid_1_seq_arr.AddAsLast(ML_STAR.plasmid_1_4);
  plasmid_2_seq_arr.SetSize(0);
  plasmid_2_seq_arr.AddAsLast(ML_STAR.plasmid_2_1);
  plasmid_2_seq_arr.AddAsLast(ML_STAR.plasmid_2_2);
  plasmid_2_seq_arr.AddAsLast(ML_STAR.plasmid_2_3);
  plasmid_2_seq_arr.AddAsLast(ML_STAR.plasmid_2_4);
  plasmid_3_seq_arr.SetSize(0);
  plasmid_3_seq_arr.AddAsLast(ML_STAR.plasmid_3_1);
  plasmid_3_seq_arr.AddAsLast(ML_STAR.plasmid_3_2);
  plasmid_3_seq_arr.AddAsLast(ML_STAR.plasmid_3_3);
  plasmid_3_seq_arr.AddAsLast(ML_STAR.plasmid_3_4);
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, Translate("strain"), strain_1_id);
  prop_arr.SetSize(0);
  prop_arr.AddAsLast(Translate("plasmid"));
  {
    for(plas_num = 0; plas_num < 4;)
    {
      plas_num = plas_num + 1;
      SeqSetPropertyRange(plasmid_1_seq_arr.ElementAt( plas_num -1), 1, 8, Translate("plasmid"), plasmid_1_id_arr.ElementAt( plas_num -1));
      LMSF_UTILITIES::SeqCopyPropsFromShortSeq(plasmid_1_seq_arr.ElementAt( plas_num -1), prop_arr, ML_STAR.Growth_Plate);
      SeqSetPropertyRange(plasmid_2_seq_arr.ElementAt( plas_num -1), 1, 8, Translate("plasmid"), plasmid_2_id_arr.ElementAt( plas_num -1));
      LMSF_UTILITIES::SeqCopyPropsFromShortSeq(plasmid_2_seq_arr.ElementAt( plas_num -1), prop_arr, ML_STAR.Growth_Plate);
      SeqSetPropertyRange(plasmid_3_seq_arr.ElementAt( plas_num -1), 1, 8, Translate("plasmid"), plasmid_3_id_arr.ElementAt( plas_num -1));
      LMSF_UTILITIES::SeqCopyPropsFromShortSeq(plasmid_3_seq_arr.ElementAt( plas_num -1), prop_arr, ML_STAR.Growth_Plate);
    }
  }
  MECC::TraceComment(Translate("**** Completed CalculateOutputs sub-method ****"));
}

private function SaveWorklistAndMetadata(  ) void {
  private variable row_id;
  private variable well_id;
  private variable plasmid;
  private variable strain;
  private variable position;
  private variable column_id;
  private variable column_id_str;
  private file file1;
  private variable iniFilePath;
  private variable iniDir;
  private variable iniExists;
  private variable loopCounter2;
  private variable inducer_conc;
  private variable additive_conc;
  private variable inducer_id;
  private variable inducer_units;
  private variable additive_id;
  private variable additive_units;
  MECC::TraceComment(Translate("**** Start SaveWorklist sub-method ****"));
  file1.AddField("position", position, hslInteger);
  file1.AddField("well", well_id, hslString, 255);
  file1.AddField("row", row_id, hslString, 255);
  file1.AddField("column", column_id, hslInteger);
  file1.AddField("inducerId", inducer_id, hslString, 255);
  file1.AddField("inducerConcentration", inducer_conc, hslFloat);
  file1.AddField("inducerUnits", inducer_units, hslString, 255);
  file1.AddField("selectorId", additive_id, hslString, 255);
  file1.AddField("selectorConc", additive_conc, hslString, 255);
  file1.AddField("selectorUnits", additive_units, hslString, 255);
  file1.AddField("strain", strain, hslString, 255);
  file1.AddField("plasmid", plasmid, hslString, 255);
  file1.SetDelimiter(hslCSVDelimited);
  if( 0 == file1.Open(worklist_file_path, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, worklist_file_path, "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    ML_STAR.Growth_Plate.SetCurrentPosition(1);
    while (
       (ML_STAR.Growth_Plate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.Growth_Plate, 1);
      loopCounter2 = loopCounter2 + 1;
      position = ML_STAR.Growth_Plate.GetCurrentPosition();
      well_id = SeqGetPositionId(ML_STAR.Growth_Plate);
      row_id = StrLeft(well_id, 1);
      column_id_str = StrMid(well_id, 1, 2);
      column_id = StrIVal(column_id_str);
      inducer_conc = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("inducer_conc"));
      inducer_id = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("inducer_id"));
      inducer_units = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("inducer_units"));
      additive_conc = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("additive_conc"));
      additive_id = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("additive_id"));
      additive_units = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("additive_units"));
      strain = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("strain"));
      plasmid = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("plasmid"));
      if( 0 == file1.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      SeqIncrement(ML_STAR.Growth_Plate, 1);
      if (
         (ML_STAR.Growth_Plate.GetCurrentPosition() > 0 && ML_STAR.Growth_Plate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.Growth_Plate.SetMax(ML_STAR.Growth_Plate.GetTotal());
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  iniDir = HSLExtensions::File::GetDirectoryName(worklist_file_path);
  iniFilePath = iniDir + "\\schema.ini";
  iniExists = HSLExtensions::File::Exists(iniFilePath);
  if (iniExists == 1)
  {
    HSLExtensions::File::Delete(iniFilePath);
  }
  MECC::TraceComment(Translate("**** Completed SaveWorklist sub-method ****"));
}

private function GetParams(  ) void {
  private variable param_dict;
  private variable loc;
  private variable read_line;
  private file file1;
  private variable split_line[];
  private variable loopCounter2;
  private variable culture_volume_str;
  private variable dilution_factor_str;
  private variable plate_num_str;
  private variable plas_num;
  private variable plasmid_key;
  private variable plasmid_id;
  private variable ind_num;
  private variable ind_key;
  private variable inducer_id;
  private variable inducer_stock_concentration;
  private variable ind_key_2;
  private variable inducer_units;
  private variable tmp_num;
  private variable tmp_id;
  private variable conc_str;
  private variable concentration;
  private variable tmp_units;
  param_dict = "param_dict";
  HSLExtensions::Dictionary::CreateDictionary(param_dict, 2);
  file1.AddField(1, read_line, hslString);
  file1.SetDelimiter(hslAsciiText);
  if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    while (
       (file1.Eof() == 0)
    )
    {
      loopCounter2 = loopCounter2 + 1;
      if( 0 == file1.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      loc = StrFind(read_line, ",");
      if (loc > 0)
      {
        split_line = HSLExtensions::String::Split(read_line, Translate(","), 1);
        HSLExtensions::Dictionary::AddItem(param_dict, split_line.ElementAt( 1 -1), split_line.ElementAt( 2 -1));
      }
    }
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  worklist_file_path = HSLExtensions::Dictionary::GetItem(param_dict, Translate("worklistFile"));
  strain_1_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("strain1"));
  plasmid_1_id_arr.SetSize(0);
  plasmid_2_id_arr.SetSize(0);
  plasmid_3_id_arr.SetSize(0);
  {
    for(plas_num = 0; plas_num < 4;)
    {
      plas_num = plas_num + 1;
      plasmid_key = StrConcat2(Translate("plasmid_1_"), plas_num);
      plasmid_id = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), plasmid_key);
      plasmid_1_id_arr.AddAsLast(plasmid_id);
      plasmid_key = StrConcat2(Translate("plasmid_2_"), plas_num);
      plasmid_id = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), plasmid_key);
      plasmid_2_id_arr.AddAsLast(plasmid_id);
      plasmid_key = StrConcat2(Translate("plasmid_3_"), plas_num);
      plasmid_id = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), plasmid_key);
      plasmid_3_id_arr.AddAsLast(plasmid_id);
    }
  }
  inducer_id_arr.SetSize(0);
  inducer_conc_arr.SetSize(0);
  inducer_units_arr.SetSize(0);
  {
    for(ind_num = 0; ind_num < 3;)
    {
      ind_num = ind_num + 1;
      ind_key = StrConcat2(Translate("inducer"), ind_num);
      inducer_id = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), ind_key);
      inducer_id_arr.AddAsLast(inducer_id);
      ind_key_2 = StrConcat2(ind_key, Translate("StockConc"));
      conc_str = HSLExtensions::Dictionary::GetItem(param_dict, ind_key_2);
      inducer_stock_concentration = StrFVal(conc_str);
      inducer_conc_arr.AddAsLast(inducer_stock_concentration);
      ind_key_2 = StrConcat2(ind_key, Translate("StockUnits"));
      inducer_units = HSLExtensions::Dictionary::GetItem(param_dict, ind_key_2);
      inducer_units_arr.AddAsLast(inducer_units);
    }
  }
  tmp_id_arr.SetSize(0);
  tmp_conc_arr.SetSize(0);
  tmp_units_arr.SetSize(0);
  {
    for(tmp_num = 0; tmp_num < 3;)
    {
      tmp_num = tmp_num + 1;
      ind_key = StrConcat2(Translate("selector"), tmp_num);
      tmp_id = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), ind_key);
      tmp_id_arr.AddAsLast(tmp_id);
      ind_key_2 = StrConcat2(ind_key, Translate("StockConc"));
      conc_str = HSLExtensions::Dictionary::GetItem(param_dict, ind_key_2);
      concentration = StrFVal(conc_str);
      tmp_conc_arr.AddAsLast(concentration);
      ind_key_2 = StrConcat2(ind_key, Translate("StockUnits"));
      tmp_units = HSLExtensions::Dictionary::GetItem(param_dict, ind_key_2);
      tmp_units_arr.AddAsLast(tmp_units);
    }
  }
  is_pipetting = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isPipetting"));
  is_debugging = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isDebugging"));
  culture_volume_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("cultureVolume"));
  culture_volume = StrFVal(culture_volume_str);
  if (culture_volume > 500)
  {
    culture_volume = 500;
  }
  else
  {
    if (culture_volume < 200)
    {
      culture_volume = 200;
    }
  }
  dilution_factor_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("dilutionFactor"));
  dilution_factor = StrFVal(dilution_factor_str);
  plate_num_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("gradPlateNum"));
  sequence_number = StrIVal(plate_num_str);
  plate_num_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("plateNum"));
  plate_number = StrIVal(plate_num_str);
}

private function pipette_media( sequence & disp_seq, variable p_vol, variable pre_wet_tips ) void {
  TrcTrace(Translate("pipetting media volume: "), p_vol);
  GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from, disp_seq, p_vol, pre_wet_tips, ML_STAR.media_pre_wet_1, ML_STAR.media_pre_wet_2, ML_STAR, ML_STAR.Tips_1000_Channels);
}

private function pipette_inducer( sequence & tip_seq, sequence & asp_seq, sequence & disp_seq, variable p_vol ) void {
  TrcTrace(Translate("pipetting inducer volume: "), p_vol);
  GSF_IMS_SHARED_SUBMETHODS::pipette_inducer(asp_seq, disp_seq, p_vol, ML_STAR, tip_seq);
}

private function pipette_dil_series( sequence & from_seq, sequence & to_seq, variable p_vol, variable m_vol, variable number_channels ) void {
  GSF_IMS_SHARED_SUBMETHODS::pipette_dil_series(from_seq, to_seq, p_vol, m_vol, number_channels, ML_STAR, ML_STAR.Tips_1000_Channels);
}

private function pipette_selector( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable pre_wet_tips, sequence & pre_wet_1, sequence & pre_wet_2 ) void {
  TrcTrace(Translate("pipetting selector volume: "), p_vol);
  GSF_IMS_SHARED_SUBMETHODS::pipette_selector(asp_seq, disp_seq, p_vol, pre_wet_tips, pre_wet_1, pre_wet_2, ML_STAR, ML_STAR.Tips_300_Channels);
}
