 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
 namespace _Method { #include "GSF-IMS Project\\GSF-IMS.shared_submethods.hs_" }
 namespace _Method { #include "HSLExtensions\\Sequence.hsl" }
#include "Fitness Selection.Align-aaRS.v1.res"
variable plasmid_1_id;
variable worklist_file_path;
variable strain_1_id;
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable culture_volume;
variable is_debugging;
dialog dialogHandle_1;
variable dilution_factor;
variable media_volume;
variable cell_volume;
variable inducer_1_id;
variable inducer_1_units;
variable inducer_ref_volume;
variable plasmid_2_id;
variable plasmid_4_id;
variable plasmid_3_id;
variable plate_number;
variable additive_1_units;
variable additive_1_id;
variable tmp_ref_volume;
variable with_tmp;
dialog dialogHandle_2;
variable first_tmp_plate;
variable inducer_1_stock_concentration;
variable dil_series_factor;
variable dil_series_multiplier;
variable dil_series_transf_vol;
variable grad_start_media_volume_0;
variable grad_start_tmp_volume;
variable tmp_volume;
variable p_vol;
dialog dialogHandle_3;
global device ML_STAR ("Fitness Selection.Align-aaRS.v1.lay", "ML_STAR", hslTrue);
variable amino_stock_dilution;
variable amino_1_stock_concentration;
variable amino_1_id;
variable amino_1_units;
variable tmp_stock_dilution;
variable additive_1_2_stock_concentration;
variable additive_1_1_stock_concentration;
variable inducer_stock_dilution;
variable inducer_volume;
variable grad_start_inducer_volume;
variable grad_start_amino_volume;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("==============================================================\nThis method used for preparing plates 2-5\n=============================================================="));
    GetParams();
    StartUp();
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_source_lid, ML_STAR.Lid_parking_Media_trough, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    dil_series_multiplier = dil_series_factor - 1.0;
    dil_series_multiplier = dil_series_factor / (dil_series_multiplier * 1.0);
    cell_volume = culture_volume / (dilution_factor * 1.0);
    media_volume = culture_volume - cell_volume;
    dil_series_transf_vol = media_volume * dil_series_multiplier;
    dil_series_transf_vol = dil_series_transf_vol - media_volume;
    first_tmp_plate = 3;
    if (plate_number < first_tmp_plate)
    {
      inducer_ref_volume = culture_volume;
      tmp_ref_volume = culture_volume;
      with_tmp = 0;
    }
    else
    {
      with_tmp = 1;
      if (plate_number == first_tmp_plate)
      {
        inducer_ref_volume = media_volume;
        tmp_ref_volume = culture_volume;
      }
      else
      {
        if (plate_number > first_tmp_plate)
        {
          inducer_ref_volume = media_volume;
          tmp_ref_volume = media_volume;
        }
      }
    }
    if (with_tmp == 1)
    {
      tmp_volume = tmp_ref_volume / (tmp_stock_dilution * 1.0);
    }
    else
    {
      tmp_volume = 0;
    }
    grad_start_tmp_volume = tmp_volume * dil_series_multiplier;
    inducer_volume = inducer_ref_volume / (inducer_stock_dilution * 1.0);
    grad_start_inducer_volume = inducer_volume * dil_series_multiplier;
    grad_start_amino_volume = inducer_ref_volume / (amino_stock_dilution * 1.0);
    grad_start_amino_volume = grad_start_amino_volume * dil_series_multiplier;
    grad_start_media_volume_0 = media_volume * dil_series_multiplier;
    grad_start_media_volume_0 = grad_start_media_volume_0 - grad_start_amino_volume;
    TrcTrace(Translate("dilution_factor: "), dilution_factor);
    TrcTrace(Translate("cell_volume: "), cell_volume);
    TrcTrace(Translate("media_volume: "), media_volume);
    TrcTrace(Translate("with_tmp: "), with_tmp);
    TrcTrace(Translate("tmp_volume: "), tmp_volume);
    TrcTrace(Translate("plate_number: "), plate_number);
    MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate\n=============================================================="));
    if (is_pipetting == "true")
    {
      GSF_IMS_SHARED_SUBMETHODS::tip_pickup(ML_STAR.Tips_1000_Channels, 4, ML_STAR);
      p_vol = media_volume;
      p_vol = p_vol - inducer_volume;
      p_vol = p_vol - tmp_volume;
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from_4, ML_STAR.regular_wells_with_tmp, p_vol, 1, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
      p_vol = grad_start_media_volume_0;
      p_vol = p_vol - grad_start_inducer_volume;
      p_vol = p_vol - grad_start_tmp_volume;
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from_4, ML_STAR.grad_start_wells_with_tmp, p_vol, 0, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
      p_vol = media_volume;
      p_vol = p_vol - inducer_volume;
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from_4, ML_STAR.regular_wells_no_tmp, p_vol, 0, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
      p_vol = grad_start_media_volume_0;
      p_vol = p_vol - grad_start_inducer_volume;
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from_4, ML_STAR.grad_start_wells_no_tmp, p_vol, 0, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::tip_eject(4, ML_STAR);
      SeqResetSequenceIndexes(ML_STAR.regular_wells_with_tmp);
      SeqResetSequenceIndexes(ML_STAR.grad_start_wells_no_tmp);
      SeqResetSequenceIndexes(ML_STAR.grad_start_wells_with_tmp);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_1.SetOutput(Translate("media into growth plate"), "\n", Translate("media into Abgene plate"), "\n");
        dialogHandle_1.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Media_trough, ML_STAR.Media_source_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nAdd inducer (DMABA)\n=============================================================="));
    if (is_pipetting == "true")
    {
      GSF_IMS_SHARED_SUBMETHODS::tip_pickup(ML_STAR.Tips_300_Channels, 4, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_reuse_tips(ML_STAR.inducer_stock_4, ML_STAR.regular_wells_all, inducer_volume, 1, 0, ML_STAR.Tips_300_Channels, 4, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_reuse_tips(ML_STAR.inducer_stock_4, ML_STAR.grad_start_wells_all, grad_start_inducer_volume, 0, 0, ML_STAR.Tips_300_Channels, 4, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::tip_eject(4, ML_STAR);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_3.SetOutput(Translate("media into growth plate"), "\n", Translate("media into Abgene plate"), "\n");
        dialogHandle_3.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    MECC::TraceComment(Translate("==============================================================\nAdd TMP\n=============================================================="));
    if (with_tmp == 1)
    {
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(ML_STAR.TMP_1_stock_4, ML_STAR.regular_add_tmp_1, tmp_volume, 0, 0, ML_STAR.Tips_300_Channels, 4, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(ML_STAR.TMP_1_stock_4, ML_STAR.grad_start_add_tmp_1, grad_start_tmp_volume, 0, 0, ML_STAR.Tips_300_Channels, 4, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(ML_STAR.TMP_2_stock_4, ML_STAR.regular_add_tmp_2, tmp_volume, 0, 0, ML_STAR.Tips_300_Channels, 4, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(ML_STAR.TMP_2_stock_4, ML_STAR.grad_start_add_tmp_2, grad_start_tmp_volume, 0, 0, ML_STAR.Tips_300_Channels, 4, ML_STAR);
      SeqResetSequenceIndexes(ML_STAR.regular_wells_with_tmp);
    }
    MECC::TraceComment(Translate("==============================================================\nAdd Amino Acid stock to grad_start wells\n=============================================================="));
    if (is_pipetting == "true")
    {
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(ML_STAR.amino_1_stock, ML_STAR.grad_start_wells_with_tmp, grad_start_amino_volume, 0, 0, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(ML_STAR.amino_1_stock_4, ML_STAR.grad_start_wells_no_tmp, grad_start_amino_volume, 0, 0, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_2.SetOutput(Translate("media into growth plate"), "\n", Translate("media into Abgene plate"), "\n");
        dialogHandle_2.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    MECC::TraceComment(Translate("*************************************************************************************************\nPipette amino acid dilution gradients\n*************************************************************************************************"));
    GSF_IMS_SHARED_SUBMETHODS::pipette_dil_series(ML_STAR.amino_gradient_1_pipette_from, ML_STAR.amino_gradient_1_pipette_to, dil_series_transf_vol, 2, dil_series_transf_vol, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
    GSF_IMS_SHARED_SUBMETHODS::pipette_dil_series(ML_STAR.amino_gradient_2_pipette_from, ML_STAR.amino_gradient_2_pipette_to, dil_series_transf_vol, 2, dil_series_transf_vol, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CalculateOutputs();
    SaveWorklistAndMetadata();
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_ExitLibrary();
  } }
