 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
 namespace _Method { #include "GSF-IMS Project\\GSF-IMS.shared_submethods.hs_" }
 namespace _Method { #include "HSLExtensions\\Sequence.hsl" }
#include "Fitness Selection.Antibiotic gradient test.res"
variable plasmid_1_id;
variable worklist_file_path;
variable strain_1_id;
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable culture_volume;
variable mix_volume;
variable is_debugging;
dialog dialogHandle_1;
variable dilution_factor;
variable media_volume;
variable cell_volume;
variable dil_series_factor;
variable dil_series_multiplier;
variable dil_series_transf_vol;
variable inducer_1_id;
variable inducer_1_units;
variable inducer_1_stock_concentration;
variable inducer_ref_volume;
variable plasmid_2_id;
variable plasmid_4_id;
variable plasmid_3_id;
variable plate_number;
variable additive_1_units;
variable additive_1_stock_concentration;
variable additive_1_id;
variable grad_start_media_volume_0;
global device ML_STAR ("Fitness Selection.Antibiotic gradient test.lay", "ML_STAR", hslTrue);
variable anti_ref_volume;
variable anti_volume;
variable with_antibiotic;
variable first_anti_plate;
variable grad_start_inducer_volume;
variable grad_start_media_vol_with_ind;
variable inducer_volume;
variable media_volume_with_ind;
variable grad_start_anti_volume;
dialog dialogHandle_2;
variable antibiotic_stock_dilution;
variable inducer_stock_dilution;
dialog dialogHandle_3;
dialog dialogHandle_4;
variable is_8_strain_experiment;
variable plasmid_id_arr[];
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("==============================================================\nThis method used for preparing plates 2-5\n=============================================================="));
    GetParams();
    StartUp();
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_source_lid, ML_STAR.Lid_parking_Media_trough, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    dil_series_multiplier = dil_series_factor - 1.0;
    dil_series_multiplier = dil_series_factor / (dil_series_multiplier * 1.0);
    cell_volume = culture_volume / (dilution_factor * 1.0);
    media_volume = culture_volume - cell_volume;
    dil_series_transf_vol = media_volume * dil_series_multiplier;
    dil_series_transf_vol = dil_series_transf_vol - media_volume;
    first_anti_plate = 3;
    if (plate_number < first_anti_plate)
    {
      inducer_ref_volume = culture_volume;
      anti_ref_volume = culture_volume;
      with_antibiotic = 0;
    }
    else
    {
      with_antibiotic = 1;
      if (plate_number == first_anti_plate)
      {
        inducer_ref_volume = media_volume;
        anti_ref_volume = culture_volume;
      }
      else
      {
        if (plate_number > first_anti_plate)
        {
          inducer_ref_volume = media_volume;
          anti_ref_volume = media_volume;
        }
      }
    }
    if (with_antibiotic == 1)
    {
      grad_start_anti_volume = anti_ref_volume / (antibiotic_stock_dilution * 1.0);
      grad_start_anti_volume = grad_start_anti_volume * dil_series_multiplier;
      grad_start_media_volume_0 = media_volume * dil_series_multiplier;
      grad_start_media_volume_0 = grad_start_media_volume_0 - grad_start_anti_volume;
    }
    else
    {
      grad_start_anti_volume = 0;
      grad_start_media_volume_0 = media_volume;
    }
    grad_start_inducer_volume = inducer_ref_volume / (inducer_stock_dilution * 1.0);
    if (with_antibiotic == 1)
    {
      grad_start_inducer_volume = grad_start_inducer_volume * dil_series_multiplier;
    }
    grad_start_media_vol_with_ind = grad_start_media_volume_0 - grad_start_inducer_volume;
    inducer_volume = inducer_ref_volume / (inducer_stock_dilution * 1.0);
    if (is_8_strain_experiment == 1)
    {
      inducer_volume = 0;
    }
    media_volume_with_ind = media_volume - inducer_volume;
    TrcTrace(Translate("dil_series_factor: "), dil_series_factor);
    TrcTrace(Translate("dilution_factor: "), dilution_factor);
    TrcTrace(Translate("cell_volume: "), cell_volume);
    TrcTrace(Translate("media_volume: "), media_volume);
    TrcTrace(Translate("dil_series_transf_vol: "), dil_series_transf_vol);
    TrcTrace(Translate("inducer_volume: "), inducer_volume);
    TrcTrace(Translate("with_antibiotic: "), with_antibiotic);
    TrcTrace(Translate("anti_volume: "), anti_volume);
    TrcTrace(Translate("plate_number: "), plate_number);
    MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate\n=============================================================="));
    if (is_pipetting == "true")
    {
      GSF_IMS_SHARED_SUBMETHODS::tip_pickup(ML_STAR.Tips_1000_Channels, 4, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from_4, ML_STAR.regular_wells_with_ind, media_volume_with_ind, 1, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from_4, ML_STAR.regular_wells_no_ind, media_volume, 0, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from_4, ML_STAR.grad_start_with_ind, grad_start_media_vol_with_ind, 0, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from_4, ML_STAR.grad_start_no_ind, grad_start_media_volume_0, 0, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::tip_eject(4, ML_STAR);
      SeqResetSequenceIndexes(ML_STAR.grad_start_with_ind);
      SeqResetSequenceIndexes(ML_STAR.regular_wells_with_ind);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_1.SetOutput(Translate("media into growth plate"), "\n", Translate("media into Abgene plate"), "\n");
        dialogHandle_1.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Media_trough, ML_STAR.Media_source_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nAdd inducer to appropriate wells\n=============================================================="));
    if (is_pipetting == "true")
    {
      if (is_8_strain_experiment != 1)
      {
        GSF_IMS_SHARED_SUBMETHODS::tip_pickup(ML_STAR.Tips_300_Channels, 4, ML_STAR);
        GSF_IMS_SHARED_SUBMETHODS::add_reagent_reuse_tips(ML_STAR.inducer_stock_4, ML_STAR.regular_wells_with_ind, inducer_volume, 1, 0, ML_STAR.Tips_300_Channels, 4, ML_STAR);
        GSF_IMS_SHARED_SUBMETHODS::add_reagent_reuse_tips(ML_STAR.inducer_stock_4, ML_STAR.grad_start_with_ind, grad_start_inducer_volume, 0, 0, ML_STAR.Tips_300_Channels, 4, ML_STAR);
        GSF_IMS_SHARED_SUBMETHODS::tip_eject(4, ML_STAR);
        SeqResetSequenceIndexes(ML_STAR.grad_start_with_ind);
        SeqResetSequenceIndexes(ML_STAR.regular_wells_with_ind);
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_4.SetOutput(Translate("Reagent stock plate to Growth plate"), "\n");
        dialogHandle_4.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    if (with_antibiotic == 1)
    {
      MECC::TraceComment(Translate("==============================================================\nDilute antibiotic (e.g. TMP) stock into grad_start wells\n=============================================================="));
      if (is_pipetting == "true")
      {
        MECC::TraceComment(Translate("****  pipette antibiotic to grad_start wells"));
        GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(ML_STAR.antibiotic_stock, ML_STAR.grad_start_add_anti, grad_start_anti_volume, 0, 0, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
      }
      else
      {
        if (is_debugging == "true")
        {
          dialogHandle_2.SetOutput(Translate("Reagent stock plate to Growth plate"), "\n");
          dialogHandle_2.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        }
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
    if (with_antibiotic == 1)
    {
      MECC::TraceComment(Translate("==============================================================\nPipette antibiotic dilution gradient\n=============================================================="));
      if (is_pipetting == "true")
      {
        mix_volume = media_volume * 1;
        GSF_IMS_SHARED_SUBMETHODS::pipette_dil_series(ML_STAR.gradient_pipette_from, ML_STAR.gradient_pipette_to, dil_series_transf_vol, 2, mix_volume, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
      }
      else
      {
        if (is_debugging == "true")
        {
          dialogHandle_3.SetOutput(Translate("Growth plate and Abgene plate"), "\n");
          dialogHandle_3.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        }
      }
    }
    if (plate_number == 1)
    {
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
      PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Lid_parking_Old_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    }
    else
    {
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
    }
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CalculateOutputs();
    SaveWorklistAndMetadata();
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_ExitLibrary();
  } }
