private function CleanUp(  ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function StartUp(  ) void {
  private variable arr_len;
  private variable loopCounter1;
  _blnSimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  MECC::TraceComment(Translate("**************************************************************************\nSet up Hamilton Heater Shakers\n**************************************************************************"));
  HSLHamHeaterShaker::SetSimulation(_blnSimulationMode);
  HSLHamHeaterShaker::CreateStarDevice(ML_STAR, 1, HHS_1);
  HSLHamHeaterShaker::CreateStarDevice(ML_STAR, 2, HHS_2);
  HSLHamHeaterShaker::StopTempCtrl(HHS_1);
  HSLHamHeaterShaker::StopTempCtrl(HHS_2);
  MECC::TraceComment(Translate("**************************************************************************\nSet up Hamilton Heater Coolers\n**************************************************************************"));
  hhc_ret = HamiltonHeaterCooler::Connect(Translate("COM8"), 300, HHC_1, HHC_SN_arr);
  if (hhc_ret != 0)
  {
    MECC::TraceComment(Translate("Already connected to HHCs"));
    HHC_1 = 100;
    HamiltonHeaterCooler::Disconnect(HHC_1);
    hhc_ret = HamiltonHeaterCooler::Connect(Translate("COM8"), 30, HHC_1, HHC_SN_arr);
  }
  arr_len=HHC_SN_arr.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < arr_len;)
    {
      loopCounter1 = loopCounter1 + 1;
      HamiltonHeaterCooler::StopTemperatureControl(HHC_SN_arr.ElementAt( loopCounter1 -1));
    }
  }
}

private function CleanUp(  ) void {
  MECC::TraceComment(Translate("************************************************\nRunning CleanUp()\n************************************************"));
  HSLHamHeaterShaker::Terminate();
  HamiltonHeaterCooler::Disconnect(HHC_1);
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR, ML_STAR.clear_96_head_seq);
}
