 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLExtensions\\Sequence.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
#include "Fitness Selection 2.With DNA Extraction.res"
sequence tip_seq_arr[];
variable tip_counter_array[];
variable loopCounter2;
variable pipette_volume;
variable pipette_volume_x_2;
dialog customDialog_1;
global device ML_STAR ("Fitness Selection 2.With DNA Extraction.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    StartUp();
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Spin_Plate_lid, ML_STAR.Lid_parking_Spin_plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Old_Growth_Plate_parking_lid, ML_STAR.Lid_parking_Old_Growth_Plate_2, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nCombine old growth plate wells into spin plate\n=============================================================="));
    pipette_volume = 460;
    pipette_volume_x_2 = pipette_volume * 2;
    if(0){
      {
        loopCounter2 = 0;
        ML_STAR.Old_Growth_Plate_parking.SetCurrentPosition(1);
        ML_STAR.Spin_Plate_combine.SetCurrentPosition(1);
        while (
           (ML_STAR.Old_Growth_Plate_parking.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.Old_Growth_Plate_parking, 1, ML_STAR.Spin_Plate_combine, 1);
          loopCounter2 = loopCounter2 + 1;
          PTL::ResetTipHandlingState();
          PTL::SetTipHandlingState("UserResponseTime", 0);
          PTL::SetTipHandlingState("ErrorHandling", 3);
          PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
          PTL::SetTipHandlingState("TipCountingIdentifier", "");
          PTL::SetTipHandlingState("InitializeCustomStepID", 0);
          PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
          PTL::SetTipHandlingState("TipPickupChannelVariable", "");
          PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
          if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_1000_Channels) )
          {
                PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          PTL::ResetTipHandlingState();
          PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
          PTL::SetTipHandlingState("ErrorHandling", 3);
          PTL::SetTipHandlingState("InitializeCustomStepID", 0);
          PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
          PTL::SetTipHandlingState("TipEjectChannelVariable", "");
          if( 0 == PTL::TipEject(ML_STAR) )
          {
                PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
          if (
             (ML_STAR.Old_Growth_Plate_parking.GetCurrentPosition() > 0 && ML_STAR.Old_Growth_Plate_parking.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.Old_Growth_Plate_parking.SetMax(ML_STAR.Old_Growth_Plate_parking.GetTotal());
        ML_STAR.Spin_Plate_combine.SetMax(ML_STAR.Spin_Plate_combine.GetTotal());
      }
    }
    {
      loopCounter2 = 0;
      ML_STAR.Old_GP_combine_even.SetCurrentPosition(1);
      ML_STAR.Old_GP_combine_odd.SetCurrentPosition(1);
      ML_STAR.Spin_Plate_combine_v2.SetCurrentPosition(1);
      while (
         (ML_STAR.Spin_Plate_combine_v2.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Old_GP_combine_even, 1, ML_STAR.Old_GP_combine_odd, 1, ML_STAR.Spin_Plate_combine_v2, 1);
        loopCounter2 = loopCounter2 + 1;
        PTL::ResetTipHandlingState();
        PTL::SetTipHandlingState("UserResponseTime", 0);
        PTL::SetTipHandlingState("ErrorHandling", 3);
        PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
        PTL::SetTipHandlingState("TipCountingIdentifier", "");
        PTL::SetTipHandlingState("InitializeCustomStepID", 0);
        PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
        PTL::SetTipHandlingState("TipPickupChannelVariable", "");
        PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
        if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_1000_Channels) )
        {
              PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        PTL::ResetTipHandlingState();
        PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
        PTL::SetTipHandlingState("ErrorHandling", 3);
        PTL::SetTipHandlingState("InitializeCustomStepID", 0);
        PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
        PTL::SetTipHandlingState("TipEjectChannelVariable", "");
        if( 0 == PTL::TipEject(ML_STAR) )
        {
              PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
        if (
           (ML_STAR.Spin_Plate_combine_v2.GetCurrentPosition() > 0 && ML_STAR.Spin_Plate_combine_v2.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Old_GP_combine_even.SetMax(ML_STAR.Old_GP_combine_even.GetTotal());
      ML_STAR.Old_GP_combine_odd.SetMax(ML_STAR.Old_GP_combine_odd.GetTotal());
      ML_STAR.Spin_Plate_combine_v2.SetMax(ML_STAR.Spin_Plate_combine_v2.GetTotal());
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Spin_plate, ML_STAR.Spin_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Old_Growth_Plate_2, ML_STAR.Old_Growth_Plate_parking_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLidNoTap(ML_STAR.Move_Old_Growth_Plate_park, ML_STAR.Old_Growth_Plate_parking_lid, ML_STAR.Growth_Plate_waste, ML_STAR.Growth_Plate_waste_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CleanUp();
    if(0){
      customDialog_1.InitCustomDialog("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");
      customDialog_1.ShowCustomDialog();
    }
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
  } }
