 namespace _Method { #include "HSLMPELib.hsl" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "DPXSmartHelper\\TipLength\\DPXPreCuttedTipsLib.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "Common\\MPE_Library.hs_" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "Hamilton HeaterCooler\\HamiltonHeaterCooler.hsl" }
 namespace _Method { #include "Common\\iSWAP-PlateAndLidMovement.hs_" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
#include "Fitness Selection 2.With DNA Extraction.res"
variable MPE2COMPort;
variable EPlateH;
variable MPE2DevID;
variable MPE2Waste;
variable _blnSimulationMode;
variable sequence_number;
variable loopCounter1;
variable culture_volume;
variable pipette_volume_1;
sequence dispense_seq;
sequence Lysate_Plate_Buffer_arr[];
variable is_pipetting;
variable is_debugging;
variable shake_time;
variable set_RPM;
timer timer1;
sequence tip_seq_arr[];
variable tip_counter_array[];
sequence aspirate_seq;
sequence Filter_Plate_WideBore_arr[];
sequence BP_Lysate_arr[];
variable use_iSWAP;
sequence BP_EluteBuffer_arr[];
variable FPonRPFilterHeight;
variable FPonRPNozzleHeight;
variable BPNozzleOffset;
variable BPFilterHeight;
variable BPNozzleHeight;
variable BPLenghtofNozzles;
sequence Cleared_Lysate_arr[];
variable offest_tip_pos;
global device ML_STAR ("Fitness Selection 2.With DNA Extraction.lay", "ML_STAR", hslTrue);
sequence N3_Buffer_arr[];
variable HHS_1;
variable HHS_2;
variable shake_speed;
variable spin_final_elution;
variable mpe_final_elution;
sequence BP_EluteBuffer_spin_arr[];
dialog customDialog_1;
dialog customDialog_2;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    PLATEANDLIDMOVEMENT::_InitLibrary();
    COMMON96HEADSUBMETHODS::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    DPXPRECUTTEDTIPSLIB::_InitLibrary();
    MPE_LIBRARY::_InitLibrary();
    ISWAP_PLATEANDLIDMOVEMENT::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("*********************************************************************************************************************\nThis method is for DNA extraction using Agilent Filter and Nunc Binding Plates with E coli culture\n\nIt runs after the \"Combine old GP wells into Spin Plate.med\" method\nand after the Overlord \"Get DWP from STAR then Centrifuge DWP.ovp\"\n\nAt the start of this method, the labware needs to be in the following positions:\nSpin Plate with lid, Handoff Position\n\n\n*********************************************************************************************************************"));
    _blnSimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    TrcTrace("_blnSimulationMode: ", _blnSimulationMode);
    GetParams();
    StartUp();
    SeqArrays();
    PipetteMove01();
    PipetteMove01A();
    offest_tip_pos = ML_STAR.Tips_1000_Offset_pickup.GetCurrentPosition();
    if (offest_tip_pos == 0)
    {
      RenewOffsetTips();
    }
    PipetteMove02();
    offest_tip_pos = ML_STAR.Tips_1000_Offset_pickup.GetCurrentPosition();
    if (offest_tip_pos == 0)
    {
      RenewOffsetTips();
    }
    PipetteMove03();
    PipetteMove04();
    offest_tip_pos = ML_STAR.Tips_1000_Offset_pickup.GetCurrentPosition();
    if (offest_tip_pos == 0)
    {
      RenewOffsetTips();
    }
    PipetteMove05();
    offest_tip_pos = ML_STAR.Tips_1000_Offset_pickup.GetCurrentPosition();
    if (offest_tip_pos == 0)
    {
      RenewOffsetTips();
    }
    PipetteMove06();
    offest_tip_pos = ML_STAR.Tips_1000_Offset_pickup.GetCurrentPosition();
    if (offest_tip_pos == 0)
    {
      RenewOffsetTips();
    }
    PipetteMove07();
    PipetteMove08();
    CleanUp();
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    if (mpe_final_elution == 1)
    {
    }
    else
    {
      customDialog_2.InitCustomDialog("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");
      customDialog_2.ShowCustomDialog();
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Numc_BP, ML_STAR.Nunc_BP_storage_1_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
    }
    PLATEANDLIDMOVEMENT::_ExitLibrary();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    DPXPRECUTTEDTIPSLIB::_ExitLibrary();
    MPE_LIBRARY::_ExitLibrary();
    ISWAP_PLATEANDLIDMOVEMENT::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
  } }
