private function CleanUp(  ) void ;
private function GetParams(  ) void ;
private function PipetteMove01(  ) void ;
private function PipetteMove01A(  ) void ;
private function PipetteMove02(  ) void ;
private function PipetteMove03(  ) void ;
private function PipetteMove04(  ) void ;
private function PipetteMove05(  ) void ;
private function PipetteMove06(  ) void ;
private function PipetteMove07(  ) void ;
private function PipetteMove08(  ) void ;
private function RenewOffsetTips(  ) void ;
private function Request_MPE2_Params( variable & UserControlPts ) void ;
private function SeqArrays(  ) void ;
private function StartUp(  ) void ;
private function UserChoiceElution(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  MECC::TraceComment(Translate("************************************************\nRunning OnAbort()\n************************************************"));
  CleanUp();
}

private function GetParams(  ) void {
  private variable param_dict;
  private variable loc;
  private variable loopCounter2;
  private variable read_line;
  private file file1;
  private variable split_line[];
  private variable culture_volume_str;
  private variable DNA_plate_number;
  private variable plate_num_str;
  private variable key_exists;
  private dialog dialogHandle1;
  MECC::TraceComment(Translate("************************************************\nRunning GetParams()\n************************************************"));
  MPE2COMPort = 7;
  TrcTrace(Translate("MPE2COMPort = "), MPE2COMPort);
  FPonRPNozzleHeight = 86.5;
  FPonRPFilterHeight = 86.5;
  BPNozzleHeight = 38.4;
  BPFilterHeight = 31.35;
  BPLenghtofNozzles = 6.6;
  BPNozzleOffset = 0;
  EPlateH = 14.35;
  MPE2Waste = 0;
  param_dict = Translate("param_dict");
  HSLExtensions::Dictionary::CreateDictionary(param_dict, 2);
  file1.AddField(1, read_line, hslString);
  file1.SetDelimiter(hslAsciiText);
  if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    while (
       (file1.Eof() == 0)
    )
    {
      loopCounter2 = loopCounter2 + 1;
      if( 0 == file1.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      loc = StrFind(read_line, ",");
      if (loc > 0)
      {
        split_line = HSLExtensions::String::Split(read_line, Translate(","), 1);
        HSLExtensions::Dictionary::AddItem(param_dict, split_line.ElementAt( 1 -1), split_line.ElementAt( 2 -1));
      }
    }
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  key_exists = HSLExtensions::Dictionary::ExistsItem(param_dict, "DNAPlateNumber");
  if (key_exists == 1)
  {
    plate_num_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("DNAPlateNumber"));
    DNA_plate_number = StrIVal(plate_num_str);
    sequence_number = DNA_plate_number % 4;
    if (sequence_number == 0)
    {
      sequence_number = 4;
    }
  }
  else
  {
    sequence_number = 1;
    dialogHandle1.SetInputSize(1);
    dialogHandle1.SetInputField(0, Translate("sequence_number"), hslInteger, 1, 1, 4);
    dialogHandle1.ShowInput(Translate("Extraction Number"), hslInfinite, hslOKOnly | hslDefButton1);
    sequence_number = dialogHandle1.GetInputField(0);
  }
  key_exists = HSLExtensions::Dictionary::ExistsItem(param_dict, "cultureVolume");
  if (key_exists == 1)
  {
    culture_volume_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("cultureVolume"));
    culture_volume = StrFVal(culture_volume_str);
  }
  else
  {
    culture_volume = 500;
  }
  if (culture_volume > 500)
  {
    culture_volume = 500;
  }
  else
  {
    if (culture_volume < 200)
    {
      culture_volume = 200;
    }
  }
  key_exists = HSLExtensions::Dictionary::ExistsItem(param_dict, "isPipetting");
  if (key_exists == 1)
  {
    is_pipetting = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isPipetting"));
  }
  else
  {
    is_pipetting = "true";
  }
  key_exists = HSLExtensions::Dictionary::ExistsItem(param_dict, "isDebugging");
  if (key_exists == 1)
  {
    is_debugging = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isDebugging"));
  }
  else
  {
    is_debugging = "true";
  }
  if(0){
    is_debugging = "false";
  }
  use_iSWAP = "true";
  shake_speed = 200;
  key_exists = HSLExtensions::Dictionary::ExistsItem(param_dict, "spin_final_elution");
  if (key_exists == 1)
  {
    spin_final_elution = HSLExtensions::Dictionary::GetItem(param_dict, Translate("spin_final_elution"));
  }
  else
  {
    spin_final_elution = "maybe";
  }
  MECC::TraceComment(Translate("************************************\nCompleted GetParams()\n************************************"));
}

private function StartUp(  ) void {
  private variable array_length;
  private variable SimMode;
  MECC::TraceComment(Translate("************************************************\nRunning StartUp()\n************************************************"));
  TIP_HANDLING_WITH_96_HEAD::GetTipCounters(tip_counter_array, 1);
  tip_counter_array.SetAt(3-1, "Tip_counter_wide_bore");
  tip_counter_array.SetAt(4-1, "Tips_for_row_offset_pickup");
  tip_seq_arr.SetSize(0);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_300_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.TipSupport_1000_WideBore);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Offset_pickup);
  array_length=tip_counter_array.GetSize();
  TrcTrace(Translate("StartUp() array_length: "), array_length);
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        TipCount::Read2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        TipCount::Read2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        TipCount::Read2(ML_STAR.TipSupport_1000_WideBore, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 4)
      {
        TipCount::Read2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  if (_blnSimulationMode == 1)
  {
    SimMode = 1;
    TrcTrace(Translate("SiimMod = "), SimMode);
  }
  else
  {
    SimMode = 0;
    TrcTrace(Translate("SiimMod = "), SimMode);
    MPE_LIBRARY::InitializeMPELibrary(_blnSimulationMode);
    MPE_LIBRARY::Connect(0);
    MPE_LIBRARY::Initialize(0);
  }
  MECC::TraceComment(Translate("**************************************************************************\nSet up Hamilton Heater Shakers and close clamps\n**************************************************************************"));
  HSLHamHeaterShaker::SetSimulation(_blnSimulationMode);
  HSLHamHeaterShaker::CreateStarDevice(ML_STAR, 1, HHS_1);
  HSLHamHeaterShaker::CreateStarDevice(ML_STAR, 2, HHS_2);
  HSLHamHeaterShaker::SetPlateLock(HHS_1, 1);
  HSLHamHeaterShaker::SetPlateLock(HHS_2, 1);
}

private function CleanUp(  ) void {
  private variable array_length;
  MECC::TraceComment(Translate("************************************************\nRunning CleanUp()\n************************************************"));
  array_length=tip_counter_array.GetSize();
  TrcTrace(Translate("CleanUp() array_length: "), array_length);
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        MECC::TraceComment(Translate("************************************************\n    1000 uL tip counter\n************************************************"));
        TipCount::Write2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        MECC::TraceComment(Translate("************************************************\n    300 uL tip counter\n************************************************"));
        TipCount::Write2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        MECC::TraceComment(Translate("************************************************\n    Wide Bore tip counter\n************************************************"));
        TipCount::Write2(ML_STAR.TipSupport_1000_WideBore, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 4)
      {
        MECC::TraceComment(Translate("************************************************\n    Offset tip counter\n************************************************"));
        TipCount::Write2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  if (_blnSimulationMode == 1)
  {
  }
  else
  {
    MPE_LIBRARY::Disconnect(0);
  }
  HSLHamHeaterShaker::Terminate();
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR, ML_STAR.clear_96_head_seq);
}

private function PipetteMove01(  ) void {
  private dialog dialogHandle_1;
  private variable pipette_volume_3;
  private variable repipette_volume;
  private variable pipette_volume_2;
  private dialog dialogHandle_2;
  MECC::TraceComment(Translate("************************************************\nRunning PipetteMove01(): remove supernatant\n************************************************"));
  if (is_debugging == "true")
  {
    dialogHandle_2.SetOutput(Translate("PipetteMove01(): Remove supernatant from cell pellets"));
    dialogHandle_2.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  PLATEANDLIDMOVEMENT::MoveLidNoTap(ML_STAR.Spin_Plate_lid, ML_STAR.Spin_Plate_lid_waste, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
  MECC::TraceComment(Translate("************************************************************************************************\nRemove supernatant from Spin plate and throw away (in adjacent wells in Spin Plate)\n\n************************************************************************************************"));
  pipette_volume_1 = 1000;
  pipette_volume_2 = culture_volume * 3.6;
  pipette_volume_3 = pipette_volume_2 - pipette_volume_1;
  TrcTrace("pipette_volume_1: ", pipette_volume_1);
  TrcTrace("pipette_volume_3: ", pipette_volume_3);
  repipette_volume = 200;
  if (is_pipetting == "true")
  {
    {
      loopCounter1 = 0;
      while (
         (ML_STAR.Spin_Plate_liquid_waste.GetCurrentPosition() > 0)
      && (ML_STAR.Spin_Plate_supernatant.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Spin_Plate_liquid_waste, 1, ML_STAR.Spin_Plate_supernatant, 1);
        loopCounter1 = loopCounter1 + 1;
        PTL::ResetTipHandlingState();
        PTL::SetTipHandlingState("UserResponseTime", 0);
        PTL::SetTipHandlingState("ErrorHandling", 3);
        PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
        PTL::SetTipHandlingState("TipCountingIdentifier", "");
        PTL::SetTipHandlingState("InitializeCustomStepID", 0);
        PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
        PTL::SetTipHandlingState("TipPickupChannelVariable", "");
        PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
        if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_1000_Channels) )
        {
              PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        PTL::ResetTipHandlingState();
        PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
        PTL::SetTipHandlingState("ErrorHandling", 3);
        PTL::SetTipHandlingState("InitializeCustomStepID", 0);
        PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
        PTL::SetTipHandlingState("TipEjectChannelVariable", "");
        if( 0 == PTL::TipEject(ML_STAR) )
        {
              PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
        if (
           (ML_STAR.Spin_Plate_liquid_waste.GetCurrentPosition() > 0 && ML_STAR.Spin_Plate_liquid_waste.GetMax() == 0 )
        && (ML_STAR.Spin_Plate_supernatant.GetCurrentPosition() > 0 && ML_STAR.Spin_Plate_supernatant.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Spin_Plate_liquid_waste.SetMax(ML_STAR.Spin_Plate_liquid_waste.GetTotal());
      ML_STAR.Spin_Plate_supernatant.SetMax(ML_STAR.Spin_Plate_supernatant.GetTotal());
      ML_STAR.Spin_Plate_liquid_waste.SetCurrentPosition(1);
      ML_STAR.Spin_Plate_supernatant.SetCurrentPosition(1);
    }
  }
  else
  {
    if (is_debugging == "true")
    {
      dialogHandle_1.SetOutput(Translate("supernatant from Spin Plate"), "\n");
      dialogHandle_1.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
  }
}

private function PipetteMove02(  ) void {
  private dialog dialogHandle_3;
  private dialog dialogHandle_4;
  MECC::TraceComment(Translate("************************************************\nRunning PipetteMove02(): add buffer P2, shake to mix\n************************************************"));
  if (is_debugging == "true")
  {
    dialogHandle_4.SetOutput(Translate("PipetteMove02(): Add buffer P2, shake to mix"));
    dialogHandle_4.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  MECC::TraceComment(Translate("****************************************************************************\nAdd Lysate Buffer P2 to Lysate Plate and move plate to ThermoShake\nBuffer P2 added with 24 tips on 96-head\n****************************************************************************"));
  pipette_volume_1 = 250;
  dispense_seq=Lysate_Plate_Buffer_arr.GetAt(sequence_number-1);
  dispense_seq.SetCurrentPosition(1);
  if (is_pipetting == "true")
  {
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    COMMON96HEADSUBMETHODS::Eject96HeadTipsAndShake(ML_STAR, 5, ML_STAR.clear_96_head_seq);
  }
  else
  {
    if (is_debugging == "true")
    {
      dialogHandle_3.SetOutput(Translate("DNA Buffer Plate 2, and Lysate Plate (on ThermoShake)"), "\n");
      dialogHandle_3.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
  }
  shake_time = 120;
  set_RPM = shake_speed;
  HSLHamHeaterShaker::StartShaker(HHS_1, set_RPM);
  if( 0 == timer1.SetTimer(shake_time) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_DNA_Buffers_2, ML_STAR.DNA_Buffers_2_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
  PLATEANDLIDMOVEMENT::MoveEppendorfDWPNoLidNoTap(ML_STAR.Move_Spin_Plate, ML_STAR.Spin_Plate_waste, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
  if( 0 == timer1.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  HSLHamHeaterShaker::StopShaker(HHS_1);
  HSLHamHeaterShaker::SetPlateLock(HHS_1, 1);
}

private function PipetteMove05(  ) void {
  private dialog customDialog_5;
  private dialog dialogHandle_6;
  MECC::TraceComment(Translate("************************************************\nRunning PipetteMove05(): Pipette cleared lystate from receving plate to BP; process BP to waste\n************************************************"));
  if (is_debugging == "true")
  {
    dialogHandle_6.SetOutput(Translate("PipetteMove05(): Move Binding Plate to MPE, transfer lysate from Receiving Plate to Binding Plate, process Binding Plate to waste"));
    dialogHandle_6.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  if (use_iSWAP == "true")
  {
    MECC::TraceComment(Translate("Moving binding plate from storage"));
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Nunc_BP_storage_1_lid, ML_STAR.Lid_parking_Numc_BP, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveBindPlateNoLid(ML_STAR.Nunc_BP_storage_1, ML_STAR.Nunc_BP_MPE2, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR, 1);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.RP_Storage_lid, ML_STAR.Lid_parking_RP, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
  }
  else
  {
    COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR, ML_STAR.clear_96_head_seq);
    customDialog_5.InitCustomDialog("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");
    customDialog_5.ShowCustomDialog();
  }
  MECC::TraceComment(Translate("*********************************************\nTransfer cleared lysate from RP to BP\n*********************************************"));
  if (is_pipetting == "true")
  {
    pipette_volume_1 = 900;
    aspirate_seq=Cleared_Lysate_arr.GetAt(sequence_number-1);
    dispense_seq=BP_Lysate_arr.GetAt(sequence_number-1);
    dispense_seq.SetCurrentPosition(1);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    COMMON96HEADSUBMETHODS::Eject96HeadTipsAndShake(ML_STAR, 2, ML_STAR.clear_96_head_seq);
  }
  else
  {
  }
  PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_RP, ML_STAR.RP_Storage_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR, ML_STAR.clear_96_head_seq);
  if (_blnSimulationMode == 1)
  {
    MECC::TraceComment(Translate("---------------------------------------------------------------------------------------------------------\nSimulation Mode: Venus is pretending to tell the MPE to push the solution through the Binding Plate\n---------------------------------------------------------------------------------------------------------"));
  }
  else
  {
    MPE_LIBRARY::FilterPlateToWaste(0, BPFilterHeight, BPNozzleHeight, Translate("pressure,40,60;"));
  }
}

private function PipetteMove06(  ) void {
  private dialog dialogHandle_7;
  MECC::TraceComment(Translate("************************************************\nRunning PipetteMove06(): wash BP with Buffer PB\n************************************************"));
  if (is_debugging == "true")
  {
    dialogHandle_7.SetOutput(Translate("PipetteMove06(): Wash Binding Plate with Buffer PB"));
    dialogHandle_7.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.DNA_Buffers_1_lid, ML_STAR.Lid_parking_DNA_Buffers_1, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
  MECC::TraceComment(Translate("*********************************************\nPipette binding Buffer PB into BP (on MPE2)\n*********************************************"));
  if (is_pipetting == "true")
  {
    pipette_volume_1 = 900;
    dispense_seq=BP_Lysate_arr.GetAt(sequence_number-1);
    dispense_seq.SetCurrentPosition(1);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    COMMON96HEADSUBMETHODS::Eject96HeadTipsAndShake(ML_STAR, 2, ML_STAR.clear_96_head_seq);
  }
  else
  {
  }
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR, ML_STAR.clear_96_head_seq);
  if (_blnSimulationMode == 1)
  {
    MECC::TraceComment(Translate("---------------------------------------------------------------------------------------------------------\nSimulation Mode: Venus is pretending to tell the MPE2 to push the fluid through the Binding Plate to waste\n---------------------------------------------------------------------------------------------------------"));
  }
  else
  {
    MPE_LIBRARY::FilterPlateToWaste(0, BPFilterHeight, BPNozzleHeight, Translate("pressure,40,60;"));
  }
}

private function SeqArrays(  ) void {
  MECC::TraceComment(Translate("************************************************\nRunning SeqArrays()\n************************************************"));
  N3_Buffer_arr.SetSize(0);
  N3_Buffer_arr.AddAsLast(ML_STAR.Buffer_N3_1);
  N3_Buffer_arr.AddAsLast(ML_STAR.Buffer_N3_2);
  N3_Buffer_arr.AddAsLast(ML_STAR.Buffer_N3_3);
  N3_Buffer_arr.AddAsLast(ML_STAR.Buffer_N3_4);
  Lysate_Plate_Buffer_arr.SetSize(0);
  Lysate_Plate_Buffer_arr.AddAsLast(ML_STAR.Lysate_Plate_Buffer_1);
  Lysate_Plate_Buffer_arr.AddAsLast(ML_STAR.Lysate_Plate_Buffer_2);
  Lysate_Plate_Buffer_arr.AddAsLast(ML_STAR.Lysate_Plate_Buffer_3);
  Lysate_Plate_Buffer_arr.AddAsLast(ML_STAR.Lysate_Plate_Buffer_4);
  Filter_Plate_WideBore_arr.SetSize(0);
  Filter_Plate_WideBore_arr.AddAsLast(ML_STAR.Filter_Plate_WideBore_1);
  Filter_Plate_WideBore_arr.AddAsLast(ML_STAR.Filter_Plate_WideBore_2);
  Filter_Plate_WideBore_arr.AddAsLast(ML_STAR.Filter_Plate_WideBore_3);
  Filter_Plate_WideBore_arr.AddAsLast(ML_STAR.Filter_Plate_WideBore_4);
  BP_EluteBuffer_arr.SetSize(0);
  BP_EluteBuffer_arr.AddAsLast(ML_STAR.BP_EluteBuff_Storage_1);
  BP_EluteBuffer_arr.AddAsLast(ML_STAR.BP_EluteBuff_Storage_2);
  BP_EluteBuffer_arr.AddAsLast(ML_STAR.BP_EluteBuff_Storage_3);
  BP_EluteBuffer_arr.AddAsLast(ML_STAR.BP_EluteBuff_Storage_4);
  BP_EluteBuffer_spin_arr.SetSize(0);
  BP_EluteBuffer_spin_arr.AddAsLast(ML_STAR.BP_EluteBuff_Spin_1);
  BP_EluteBuffer_spin_arr.AddAsLast(ML_STAR.BP_EluteBuff_Spin_2);
  BP_EluteBuffer_spin_arr.AddAsLast(ML_STAR.BP_EluteBuff_Spin_3);
  BP_EluteBuffer_spin_arr.AddAsLast(ML_STAR.BP_EluteBuff_Spin_4);
  BP_Lysate_arr.SetSize(0);
  BP_Lysate_arr.AddAsLast(ML_STAR.BP_Lysate_MPE_1);
  BP_Lysate_arr.AddAsLast(ML_STAR.BP_Lysate_MPE_2);
  BP_Lysate_arr.AddAsLast(ML_STAR.BP_Lysate_MPE_3);
  BP_Lysate_arr.AddAsLast(ML_STAR.BP_Lysate_MPE_4);
  Cleared_Lysate_arr.SetSize(0);
  Cleared_Lysate_arr.AddAsLast(ML_STAR.Cleared_Lysate_1);
  Cleared_Lysate_arr.AddAsLast(ML_STAR.Cleared_Lysate_2);
  Cleared_Lysate_arr.AddAsLast(ML_STAR.Cleared_Lysate_3);
  Cleared_Lysate_arr.AddAsLast(ML_STAR.Cleared_Lysate_4);
}

private function PipetteMove07(  ) void {
  private dialog dialogHandle_8;
  MECC::TraceComment(Translate("************************************************\nRunning PipetteMove07(): wash BP with Buffer PE, dry BP\n************************************************"));
  if (is_debugging == "true")
  {
    dialogHandle_8.SetOutput(Translate("PipetteMove07(): Wash Binding Plate with Buffer PE, dry Binding Plate"));
    dialogHandle_8.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  MECC::TraceComment(Translate("*********************************************\nPipette binding Buffer PE to BP (on MPE2)\n*********************************************"));
  if (is_pipetting == "true")
  {
    pipette_volume_1 = 900;
    dispense_seq=BP_Lysate_arr.GetAt(sequence_number-1);
    dispense_seq.SetCurrentPosition(1);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    COMMON96HEADSUBMETHODS::Eject96HeadTipsAndShake(ML_STAR, 2, ML_STAR.clear_96_head_seq);
  }
  else
  {
  }
  PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_DNA_Buffers_1, ML_STAR.DNA_Buffers_1_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR, ML_STAR.clear_96_head_seq);
  if (_blnSimulationMode == 1)
  {
    MECC::TraceComment(Translate("---------------------------------------------------------------------------------------------------------\nSimulation Mode: Venus is pretending to tell the MPE2 to push the fluid through the Binding Plate to waste\n---------------------------------------------------------------------------------------------------------"));
  }
  else
  {
    MPE_LIBRARY::FilterPlateToWaste(0, BPFilterHeight, BPNozzleHeight, Translate("pressure,40,60;pressure,65,420;"));
  }
  PLATEANDLIDMOVEMENT::MoveBindPlateNoLid(ML_STAR.Nunc_BP_MPE2, ML_STAR.Nunc_BP_MPE2, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR, 7);
}

private function PipetteMove03(  ) void {
  private dialog dialogHandle_9;
  private dialog dialogHandle_10;
  MECC::TraceComment(Translate("************************************************\nRunning PipetteMove03(): add Buffer N3, shake to mix\n************************************************"));
  if (is_debugging == "true")
  {
    dialogHandle_10.SetOutput(Translate("PipetteMove03(): Add Buffer N3, shake to mix"));
    dialogHandle_10.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  MECC::TraceComment(Translate("****************************************************************************\nRemove lid from DNA Buffer N3\nAdd Lysate Buffer N3 to Lysate Plate (on ThermoShake)\nBuffer N3 added with 24 tips on 96-head\n****************************************************************************"));
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR, ML_STAR.clear_96_head_seq);
  PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.DNA_N3_Buffer_lid, ML_STAR.Lid_parking_N3_Buffer, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
  pipette_volume_1 = 350;
  aspirate_seq=N3_Buffer_arr.GetAt(sequence_number-1);
  dispense_seq=Lysate_Plate_Buffer_arr.GetAt(sequence_number-1);
  dispense_seq.SetCurrentPosition(1);
  if (is_pipetting == "true")
  {
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    COMMON96HEADSUBMETHODS::Eject96HeadTipsAndShake(ML_STAR, 2, ML_STAR.clear_96_head_seq);
  }
  else
  {
    if (is_debugging == "true")
    {
      dialogHandle_9.SetOutput(Translate("DNA Buffer N3, and Lysate Plate (on ThermoShake)"), "\n");
      dialogHandle_9.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
  }
  shake_time = 120;
  set_RPM = shake_speed;
  HSLHamHeaterShaker::SetPlateLock(HHS_1, 1);
  HSLHamHeaterShaker::StartShaker(HHS_1, set_RPM);
  if( 0 == timer1.SetTimer(shake_time) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_N3_Buffer, ML_STAR.DNA_N3_Buffer_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
  if( 0 == timer1.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  HSLHamHeaterShaker::StopShaker(HHS_1);
  HSLHamHeaterShaker::SetPlateLock(HHS_1, 1);
}

private function PipetteMove01A(  ) void {
  private variable pipette_volume_2;
  private variable loopCounter2;
  private dialog dialogHandle_11;
  private variable mix_volume;
  private dialog dialogHandle_12;
  MECC::TraceComment(Translate("************************************************\nRunning PipetteMove01A(): resuspend pellet with Buffer P1, transfer to LP\n************************************************"));
  if (is_debugging == "true")
  {
    dialogHandle_12.SetOutput(Translate("PipetteMove01A(): Resuspend pellet with Buffer P1, transfer to Lysate Plate"));
    dialogHandle_12.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.ABGene_LP_Shake_lid, ML_STAR.Lid_parking_LP, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
  PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.DNA_Buffers_2_lid, ML_STAR.Lid_parking_DNA_Buffers_2, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
  MECC::TraceComment(Translate("************************************************************************************************\nResuspend cells in Spin Plate with Buffer P1\n200uL per well\nand transfer to Lysate Plate\n************************************************************************************************"));
  pipette_volume_1 = 200;
  mix_volume = 220;
  pipette_volume_2 = 300;
  dispense_seq=Lysate_Plate_Buffer_arr.GetAt(sequence_number-1);
  if (is_pipetting == "true")
  {
    {
      loopCounter2 = 0;
      while (
         (ML_STAR.Spin_Plate_Buffer_P1.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Spin_Plate_Buffer_P1, 1);
        loopCounter2 = loopCounter2 + 1;
        MECC::TraceComment(Translate("Resuspsend cells with Buffer P1 and transfer to Lysate Plate"));
        PTL::ResetTipHandlingState();
        PTL::SetTipHandlingState("UserResponseTime", 0);
        PTL::SetTipHandlingState("ErrorHandling", 3);
        PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
        PTL::SetTipHandlingState("TipCountingIdentifier", "");
        PTL::SetTipHandlingState("InitializeCustomStepID", 0);
        PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
        PTL::SetTipHandlingState("TipPickupChannelVariable", "");
        PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
        if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_300_Channels) )
        {
              PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        PTL::ResetTipHandlingState();
        PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
        PTL::SetTipHandlingState("ErrorHandling", 3);
        PTL::SetTipHandlingState("InitializeCustomStepID", 0);
        PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
        PTL::SetTipHandlingState("TipEjectChannelVariable", "");
        if( 0 == PTL::TipEject(ML_STAR) )
        {
              PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
        if (
           (ML_STAR.Spin_Plate_Buffer_P1.GetCurrentPosition() > 0 && ML_STAR.Spin_Plate_Buffer_P1.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Spin_Plate_Buffer_P1.SetMax(ML_STAR.Spin_Plate_Buffer_P1.GetTotal());
      ML_STAR.Spin_Plate_Buffer_P1.SetCurrentPosition(1);
    }
  }
  else
  {
    if (is_debugging == "true")
    {
      dialogHandle_11.SetOutput(Translate("DNA Buffer Plate 2, Spin Plate, and Lysate Plate"), "\n");
      dialogHandle_11.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
  }
}

private function RenewOffsetTips(  ) void {
  private dialog dialogHandle_13;
  MECC::TraceComment(Translate("************************************************\nRunning RenewOffsetTips()\n************************************************"));
  if (is_debugging == "true")
  {
    dialogHandle_13.SetOutput(Translate("RenewOffsetTips()"));
    dialogHandle_13.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  MECC::TraceComment(Translate("--------------------------------------------------------------------------------------------------------------------------\nGet any tips that are already  on the offset pickup and throw them to waste\n--------------------------------------------------------------------------------------------------------------------------"));
  ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
  COMMON96HEADSUBMETHODS::Eject96HeadTipsAndShake(ML_STAR, 10, ML_STAR.clear_96_head_seq);
  MECC::TraceComment(Translate("--------------------------------------------------------------------------------------------------------------------------\nMove tips form handoff to offset support\n--------------------------------------------------------------------------------------------------------------------------"));
  ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
  ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  SeqCopySequence(ML_STAR.Tips_1000_Offset_pickup, ML_STAR.Tips_1000_Offset_copy);
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR, ML_STAR.clear_96_head_seq);
}

private function PipetteMove08(  ) void {
  private timer timer_Elution;
  private variable loopCounter3;
  private dialog dialogHandle_14;
  private dialog customDialog_15;
  private dialog customDialog_16;
  private dialog customDialog_17;
  private dialog customDialog_18;
  private dialog customDialog_19;
  private dialog dialogHandle_20;
  private dialog dialogHandle_21;
  private dialog customDialog_22;
  private dialog customDialog_23;
  private timer centrifuge_timer;
  private dialog customDialog_24;
  MECC::TraceComment(Translate("************************************************\nRunning PipetteMove08(): Add Elute Buffer/water to BP, process BP to EP\n************************************************"));
  is_pipetting = "true";
  if (is_debugging == "true")
  {
    dialogHandle_14.SetOutput(Translate("PipetteMove08(): Move Binding Plate to pipetting position, add elution buffer (water) to Binding Plate; process Binding Plate to Elution Plate"));
    dialogHandle_14.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  UserChoiceElution();
  if (mpe_final_elution == 1)
  {
    MECC::TraceComment(Translate("****** Preparing to use the MPE for final elution ******"));
    if (use_iSWAP == "true")
    {
      if(0){
        customDialog_16.InitCustomDialog("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");
        customDialog_16.ShowCustomDialog();
      }
      PLATEANDLIDMOVEMENT::MoveEppendorf350uLElutionPlateWithLid(ML_STAR.Eppendorf_EP_Storage, ML_STAR.Eppendorf_EP_Storage_lid, ML_STAR.Eppendorf_EP_Pipetting, ML_STAR.Eppendorf_EP_Pipetting_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Eppendorf_EP_Pipetting_lid, ML_STAR.Lid_parking_EP_by_MPE, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
      PLATEANDLIDMOVEMENT::MoveBindPlateNoLid(ML_STAR.Nunc_BP_MPE2, ML_STAR.Nunc_BP_on_EP, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR, 1);
    }
    else
    {
      COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR, ML_STAR.clear_96_head_seq);
      customDialog_15.InitCustomDialog("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");
      customDialog_15.ShowCustomDialog();
      customDialog_17.InitCustomDialog("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");
      customDialog_17.ShowCustomDialog();
    }
  }
  else
  {
    MECC::TraceComment(Translate("****** Preparing to use a centrifuge for final elution ******"));
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Eppendorf_EP_Storage_lid, ML_STAR.Lid_parking_EP_spin, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveBindPlateNoLid(ML_STAR.Nunc_BP_MPE2, ML_STAR.Nunc_BP_on_EP_spin, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR, 1);
  }
  PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.DNA_Elute_Buffer_lid, ML_STAR.Lid_parking_Elute_Buffer_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
  MECC::TraceComment(Translate("*********************************************\nPipette Elution Buffer/H2O into BP (on EP)\n*********************************************"));
  if (is_pipetting == "true")
  {
    pipette_volume_1 = 100;
    if (mpe_final_elution == 1)
    {
      dispense_seq=BP_EluteBuffer_arr.GetAt(sequence_number-1);
    }
    else
    {
      dispense_seq=BP_EluteBuffer_spin_arr.GetAt(sequence_number-1);
    }
    dispense_seq.SetCurrentPosition(1);
    {
      loopCounter3 = 0;
      while (
         (dispense_seq.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, dispense_seq, 1);
        loopCounter3 = loopCounter3 + 1;
        PTL::ResetTipHandlingState();
        PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
        PTL::SetTipHandlingState("ErrorHandling", 3);
        PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
        PTL::SetTipHandlingState("TipCountingIdentifier", "");
        PTL::SetTipHandlingState("InitializeCustomStepID", 0);
        PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
        PTL::SetTipHandlingState("TipPickupChannelVariable", "");
        PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
        if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_300_Channels) )
        {
              PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        PTL::ResetTipHandlingState();
        PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
        PTL::SetTipHandlingState("ErrorHandling", 3);
        PTL::SetTipHandlingState("InitializeCustomStepID", 0);
        PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
        PTL::SetTipHandlingState("TipEjectChannelVariable", "");
        if( 0 == PTL::TipEject(ML_STAR) )
        {
              PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
        if (
           (dispense_seq.GetCurrentPosition() > 0 && dispense_seq.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      dispense_seq.SetMax(dispense_seq.GetTotal());
      dispense_seq.SetCurrentPosition(1);
    }
  }
  else
  {
  }
  if( 0 == timer_Elution.SetTimer(300) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if (mpe_final_elution == 1)
  {
    MECC::TraceComment(Translate("*************************************************************************************************************\nElute the contents of the binding plate into an (Eppendorf lo-bind) elution plate \n*************************************************************************************************************"));
    if (use_iSWAP == "true")
    {
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Elute_Buffer_lid, ML_STAR.DNA_Elute_Buffer_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
      PLATEANDLIDMOVEMENT::MoveBindPlateNoLid(ML_STAR.Nunc_BP_on_EP, ML_STAR.Nunc_BP_MPE2, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR, 1);
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_EP_by_MPE, ML_STAR.Eppendorf_EP_Pipetting_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    }
    else
    {
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Elute_Buffer_lid, ML_STAR.DNA_Elute_Buffer_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
      customDialog_18.InitCustomDialog("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");
      customDialog_18.ShowCustomDialog();
    }
    if (_blnSimulationMode == 1)
    {
      MECC::TraceComment(Translate("---------------------------------------------------------------------------------------------------------\nSimulation Mode: Venus is pretending to tell the MPE2 to clamp the binding plate\n---------------------------------------------------------------------------------------------------------"));
    }
    else
    {
      MPE_LIBRARY::SetFilterHeight(BPFilterHeight);
      MPE_LIBRARY::SetNozzleHeight(BPNozzleHeight);
      MPE_LIBRARY::FilterPlatePlaced(0);
      MPE_LIBRARY::ClampFilterPlate(0);
    }
    if (use_iSWAP == "true")
    {
      PLATEANDLIDMOVEMENT::MoveEppendorf350uLElutionPlateWithLid(ML_STAR.Eppendorf_EP_Pipetting, ML_STAR.Eppendorf_EP_Pipetting_lid, ML_STAR.Eppendorf_EP_MPE, ML_STAR.Eppendorf_EP_MPE_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Eppendorf_EP_MPE_lid, ML_STAR.Lid_parking_EP_by_MPE, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    }
    else
    {
      customDialog_19.InitCustomDialog("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");
      customDialog_19.ShowCustomDialog();
    }
  }
  else
  {
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Numc_BP, ML_STAR.Nunc_BP_on_EP_spin_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Elute_Buffer_lid, ML_STAR.DNA_Elute_Buffer_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
    customDialog_22.InitCustomDialog("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");
    customDialog_22.ShowCustomDialog();
  }
  if( 0 == timer_Elution.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if (mpe_final_elution == 1)
  {
    if (_blnSimulationMode == 1)
    {
      MECC::TraceComment(Translate("---------------------------------------------------------------------------------------------------------\nSimulation Mode: Venus is pretending to push elution buffer through the binding plate\n---------------------------------------------------------------------------------------------------------"));
    }
    else
    {
      MPE_LIBRARY::SetCollectionPlateHeight(EPlateH);
      MPE_LIBRARY::SetOffsetFromNozzles(BPNozzleOffset);
      MPE_LIBRARY::CollectionPlatePlaced(0);
      MPE_LIBRARY::SetControlPoints(Translate("pressure,65,420;"));
      MPE_LIBRARY::ProcessFilterToCollectionPlate(0, 0);
    }
    if (use_iSWAP == "true")
    {
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_EP_by_MPE, ML_STAR.Eppendorf_EP_MPE_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
      PLATEANDLIDMOVEMENT::MoveEppendorf350uLElutionPlateWithLid(ML_STAR.Eppendorf_EP_MPE, ML_STAR.Eppendorf_EP_MPE_lid, ML_STAR.Eppendorf_EP_Storage, ML_STAR.Eppendorf_EP_Storage_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    }
    else
    {
      dialogHandle_20.SetOutput(Translate("Remove elution plate from MPE2, add lid, and take to NGS-STAR for library prep."));
      dialogHandle_20.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if (_blnSimulationMode == 1)
    {
    }
    else
    {
      MPE_LIBRARY::CollectionPlateRemoved(0);
      MPE_LIBRARY::RetrieveFilterPlate(0);
    }
    if (use_iSWAP == "true")
    {
      PLATEANDLIDMOVEMENT::MoveBindPlateNoLid(ML_STAR.Nunc_BP_MPE2, ML_STAR.Nunc_BP_storage_1, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR, 1);
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Numc_BP, ML_STAR.Nunc_BP_storage_1_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    }
    else
    {
      dialogHandle_21.SetOutput(Translate("Move Binding plate from MPE2  to storage location (on top of support plate)."), "\n", Translate("Move Receiving Plate to storage location (under Filter Plate)."), "\n");
      dialogHandle_21.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if (_blnSimulationMode == 1)
    {
    }
    else
    {
      MPE_LIBRARY::FilterPlateRemoved(0);
    }
  }
  else
  {
    customDialog_23.InitCustomDialog("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");
    customDialog_23.ShowCustomDialog();
    if( 0 == centrifuge_timer.SetTimer(210) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == centrifuge_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    customDialog_24.InitCustomDialog("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");
    customDialog_24.ShowCustomDialog();
  }
}

private function Request_MPE2_Params( variable & UserControlPts ) void {
  private variable PressureStr;
  private variable Pressure;
  private variable TimeStr;
  private variable Time;
  private dialog dialogHandle_25;
  UserControlPts = 0;
  MECC::TraceComment(Translate("************************************\nStart user input submethod\n************************************"));
  dialogHandle_25.SetInputSize(2);
  dialogHandle_25.SetInputField(0, Translate("Enter pressure (psi): "), hslInteger, 65, 0, 100);
  dialogHandle_25.SetInputField(1, Translate("Enter duration (s): "), hslInteger, 420, 0, 1000000);
  dialogHandle_25.ShowInput(Translate("Enter [MPE]2 parameters"), hslInfinite, hslOKOnly | hslDefButton1);
  Pressure = dialogHandle_25.GetInputField(0);
  Time = dialogHandle_25.GetInputField(1);
  MECC::TraceComment(Translate("Convert entered integer variables for Pressure and Time to strings"));
  PressureStr = StrIStr(Pressure);
  TimeStr = StrIStr(Time);
  MECC::TraceComment(Translate("Assign \"UserControlPts\" string for [MPE]2 processing step: type (pressure), value (PressureStr), duration (TimeStr)"));
  UserControlPts = Translate("pressure,");
  UserControlPts = UserControlPts + PressureStr;
  UserControlPts = UserControlPts + Translate(",");
  UserControlPts = UserControlPts + TimeStr;
  MECC::TraceComment(Translate("************************************\nEnd user input submethod\n************************************"));
}

private function PipetteMove04(  ) void {
  private variable mix_volume;
  private variable wide_bore_length;
  private variable wide_bore_volume;
  private variable filter_plate_incubation_time;
  private timer timer2;
  private dialog dialogHandle_26;
  private dialog customDialog_27;
  private dialog dialogHandle_28;
  private dialog dialogHandle_29;
  private dialog dialogHandle_30;
  MECC::TraceComment(Translate("************************************************\nRunning PipetteMove04(): Load FP, process FP to RP\n************************************************"));
  if (is_debugging == "true")
  {
    dialogHandle_29.SetOutput(Translate("PipetteMove04(): Move Filter Plate and Receiving Plate to MPE, transfer lysate to Filter Plate, push lysate through to Receiving Plate"));
    dialogHandle_29.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  if (use_iSWAP == "true")
  {
    MECC::TraceComment(Translate("Moving receiving plate and filter plate"));
    PLATEANDLIDMOVEMENT::MoveEppendorfDWPWithLid(ML_STAR.RP_Storage, ML_STAR.RP_Storage_lid, ML_STAR.RP_on_MPE, ML_STAR.RP_on_MPE_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.RP_on_MPE_lid, ML_STAR.Lid_parking_RP, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveAgilentFPwithLid(ML_STAR.FP_Storage_1, ML_STAR.FP_Storage_1_lid, ML_STAR.FP_on_MPE, ML_STAR.FP_on_MPE_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR, 1);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.FP_on_MPE_lid, ML_STAR.Lid_parking_Agilent_FP, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
  }
  else
  {
    COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR, ML_STAR.clear_96_head_seq);
    customDialog_27.InitCustomDialog("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");
    customDialog_27.ShowCustomDialog();
  }
  filter_plate_incubation_time = 120;
  pipette_volume_1 = 900;
  aspirate_seq=Lysate_Plate_Buffer_arr.GetAt(sequence_number-1);
  aspirate_seq.SetCurrentPosition(1);
  dispense_seq=Filter_Plate_WideBore_arr.GetAt(sequence_number-1);
  if (is_pipetting == "true")
  {
    mix_volume = pipette_volume_1 * 0.75;
    wide_bore_length = 79.8;
    wide_bore_volume = 1000;
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    DPXPRECUTTEDTIPSLIB::SetCuttedTipLenght(ML_STAR, 5, wide_bore_length, wide_bore_volume);
    if (pipette_volume_1 > wide_bore_volume)
    {
      pipette_volume_1 = wide_bore_volume;
    }
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    if( 0 == timer2.SetTimer(filter_plate_incubation_time) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    COMMON96HEADSUBMETHODS::Eject96HeadTipsAndShake(ML_STAR, 2, ML_STAR.clear_96_head_seq);
    DPXPRECUTTEDTIPSLIB::ResetCuttedTipLenght(ML_STAR, 5);
  }
  else
  {
    if( 0 == timer2.SetTimer(filter_plate_incubation_time) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (is_debugging == "true")
    {
      dialogHandle_26.SetOutput(Translate("Lysate Plate (storage) to Filter Plate (on MPE2)"), "\n");
      dialogHandle_26.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
  }
  PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_LP, ML_STAR.ABGene_LP_Shake_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
  MECC::TraceComment(Translate("timer for filter plate"));
  if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if (_blnSimulationMode == 1)
  {
    MECC::TraceComment(Translate("---------------------------------------------------------------------------------------------------------\nSimulation Mode: Venus is pretending to make the MPE2 push fluid through the Filter Plate\n---------------------------------------------------------------------------------------------------------"));
  }
  else
  {
    MPE_LIBRARY::FilterPlateToWaste(0, FPonRPFilterHeight, FPonRPNozzleHeight, Translate("pressure,20,240;pressure,65,60;"));
  }
  if (use_iSWAP == "true")
  {
    MECC::TraceComment(Translate("Moving filter plate and receiving plate back to storage locations"));
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Agilent_FP, ML_STAR.FP_on_MPE_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveAgilentFPwithLid(ML_STAR.FP_on_MPE, ML_STAR.FP_on_MPE_lid, ML_STAR.FP_on_MPE, ML_STAR.FP_on_MPE_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR, 4);
    PLATEANDLIDMOVEMENT::MoveAgilentFPwithLid(ML_STAR.FP_on_MPE, ML_STAR.FP_on_MPE_lid, ML_STAR.FP_Storage_1, ML_STAR.FP_Storage_1_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR, 1);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_RP, ML_STAR.RP_on_MPE_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveEppendorfDWPWithLid(ML_STAR.RP_on_MPE, ML_STAR.RP_on_MPE_lid, ML_STAR.RP_Storage, ML_STAR.RP_Storage_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
  }
  else
  {
    COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR, ML_STAR.clear_96_head_seq);
    dialogHandle_28.SetOutput(Translate("Return Filter Plate to storage location."));
    dialogHandle_28.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    dialogHandle_30.SetOutput(Translate("Move Receiving Plate to Handoff position on STAR deck."));
    dialogHandle_30.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    if (_blnSimulationMode == 1)
    {
      MECC::TraceComment(Translate("---------------------------------------------------------------------------------------------------------\nSimulation Mode: Venus is pretending to make the MPE2 let go of the Filter Plate\n---------------------------------------------------------------------------------------------------------"));
    }
    else
    {
      HSLMPELib::FilterPlateRemoved(MPE2DevID);
    }
  }
}

private function UserChoiceElution(  ) void {
  private dialog customDialog_31;
  MECC::TraceComment(Translate("******************************************************************\nStart UserChoiceElution() sub-method\n******************************************************************"));
  if (spin_final_elution == "yes")
  {
    mpe_final_elution = 0;
  }
  else
  {
    if (spin_final_elution == "no")
    {
      mpe_final_elution = 1;
    }
    else
    {
      customDialog_31.InitCustomDialog("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");
      customDialog_31.ShowCustomDialog();
      mpe_final_elution = customDialog_31.GetCustomDialogProperty( "ReturnValue" );
      mpe_final_elution = 2 - mpe_final_elution;
    }
  }
  MECC::TraceComment(Translate("******************************************************************\nCompleted UserChoiceElution() sub-method\n******************************************************************"));
}
