 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Directory.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLTimLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
#include "Fitness Selection 2.With DNA Extraction.res"
global device ML_STAR ("Fitness Selection 2.With DNA Extraction.lay", "ML_STAR", hslTrue);
variable new_grip_after_each;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    StartUp();
    new_grip_after_each = 0;
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.DNA_Elute_Buffer_lid, ML_STAR.Lid_parking_Elute_Buffer, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Elute_Buffer, ML_STAR.DNA_Elute_Buffer_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.DNA_N3_Buffer_lid, ML_STAR.Lid_parking_N3_Buffer, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_N3_Buffer, ML_STAR.DNA_N3_Buffer_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, new_grip_after_each, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.DNA_Buffers_1_lid, ML_STAR.Lid_parking_DNA_Buffers_1, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_DNA_Buffers_1, ML_STAR.DNA_Buffers_1_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, new_grip_after_each, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_source_lid, ML_STAR.Lid_parking_Media_trough, ML_STAR.COREGripTool_OnWaste_1000ul_0001, new_grip_after_each, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Media_trough, ML_STAR.Media_source_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, new_grip_after_each, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.ABGene_plate_0002_lid, ML_STAR.Lid_parking_ABGene_plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, new_grip_after_each, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_ABGene_plate, ML_STAR.ABGene_plate_0002_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, new_grip_after_each, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
  } }
