 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
 namespace _Method { #include "GSF-IMS Project\\GSF-IMS.shared_submethods.hs_" }
 namespace _Method { #include "HSLExtensions\\Sequence.hsl" }
#include "GROQ-Seq.2_TFs.res"
variable worklist_file_path;
variable strain_1_id;
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable culture_volume;
variable is_debugging;
dialog dialogHandle_1;
variable dilution_factor;
variable cell_volume;
variable sequence_number;
variable inducer_ref_volume;
variable plate_number;
variable first_tmp_seq;
variable tmp_ref_volume;
variable with_tmp;
variable add_inducer_volume;
variable media_volume;
variable add_tmp_volume;
variable media_vol_w_tmp;
dialog dialogHandle_2;
variable media_vol_w_tmp_ind;
variable media_vol_w_ind;
variable inducer_id_arr[];
variable inducer_units_arr[];
variable inducer_conc_arr[];
variable tmp_units_arr[];
variable tmp_conc_arr[];
variable tmp_id_arr[];
variable plasmid_1_id_arr[];
variable plasmid_2_id_arr[];
variable num_channels;
global device ML_STAR ("GROQ-Seq.2_TFs.lay", "ML_STAR", hslTrue);
variable dil_series_factor;
variable dil_series_multiplier;
variable dil_series_transf_vol;
variable grad_start_media_volume;
variable grad_start_inducer_volume;
variable grad_start_tmp_volume;
dialog dialogHandle_3;
variable mix_volume;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("==============================================================\n\n=============================================================="));
    GetParams();
    StartUp();
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_source_lid, ML_STAR.Lid_parking_Media_trough, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    dil_series_multiplier = dil_series_factor - 1.0;
    dil_series_multiplier = dil_series_factor / (dil_series_multiplier * 1.0);
    cell_volume = culture_volume / (dilution_factor * 1.0);
    media_volume = culture_volume - cell_volume;
    dil_series_transf_vol = media_volume * dil_series_multiplier;
    dil_series_transf_vol = dil_series_transf_vol - media_volume;
    first_tmp_seq = 2;
    if (sequence_number < first_tmp_seq)
    {
      inducer_ref_volume = culture_volume;
      tmp_ref_volume = culture_volume;
      with_tmp = 0;
    }
    else
    {
      with_tmp = 1;
      if (sequence_number == first_tmp_seq)
      {
        inducer_ref_volume = media_volume;
        tmp_ref_volume = culture_volume;
      }
      else
      {
        if (sequence_number > first_tmp_seq)
        {
          inducer_ref_volume = media_volume;
          tmp_ref_volume = media_volume;
        }
      }
    }
    add_inducer_volume = inducer_ref_volume / (2 * 1.0);
    if (with_tmp == 1)
    {
      add_tmp_volume = tmp_ref_volume / (10 * 1.0);
      grad_start_tmp_volume = tmp_ref_volume / (10 * 1.0);
      grad_start_tmp_volume = grad_start_tmp_volume * dil_series_multiplier;
    }
    else
    {
      add_tmp_volume = 0;
      grad_start_tmp_volume = 0;
    }
    media_vol_w_tmp = media_volume - add_tmp_volume;
    media_vol_w_tmp_ind = media_vol_w_tmp - add_inducer_volume;
    media_vol_w_ind = media_volume - add_inducer_volume;
    grad_start_inducer_volume = inducer_ref_volume / (2 * 1.0);
    grad_start_inducer_volume = grad_start_inducer_volume * dil_series_multiplier;
    grad_start_media_volume = media_volume * dil_series_multiplier;
    grad_start_media_volume = grad_start_media_volume - grad_start_inducer_volume;
    TrcTrace(Translate("media_vol_w_ind: "), media_vol_w_ind);
    TrcTrace(Translate("dilution_factor: "), dilution_factor);
    TrcTrace(Translate("cell_volume: "), cell_volume);
    TrcTrace(Translate("media_volume: "), media_volume);
    TrcTrace(Translate("add_inducer_volume: "), add_inducer_volume);
    TrcTrace(Translate("with_tmp: "), with_tmp);
    TrcTrace(Translate("add_tmp_volume: "), add_tmp_volume);
    TrcTrace(Translate("sequence_number: "), sequence_number);
    MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate\n=============================================================="));
    if (is_pipetting == "true")
    {
      num_channels = 8;
      GSF_IMS_SHARED_SUBMETHODS::tip_pickup(ML_STAR.Tips_1000_Channels, num_channels, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from, ML_STAR.media_grad_start, grad_start_media_volume, 1, ML_STAR.Tips_1000_Channels, num_channels, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from, ML_STAR.media_w_nothing, media_volume, 0, ML_STAR.Tips_1000_Channels, num_channels, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from, ML_STAR.media_w_tmp, media_vol_w_tmp, 0, ML_STAR.Tips_1000_Channels, num_channels, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from, ML_STAR.media_w_ind, media_vol_w_ind, 0, ML_STAR.Tips_1000_Channels, num_channels, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from, ML_STAR.media_w_tmp_ind, media_vol_w_tmp_ind, 0, ML_STAR.Tips_1000_Channels, num_channels, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::tip_eject(num_channels, ML_STAR);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_1.SetOutput(Translate("media into growth plate"), "\n", Translate("media into Abgene plate"), "\n");
        dialogHandle_1.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Media_trough, ML_STAR.Media_source_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nDilute selector (e.g. TMP) stock into appropriate wells\n=============================================================="));
    if (is_pipetting == "true")
    {
      if (with_tmp == 1)
      {
        GSF_IMS_SHARED_SUBMETHODS::add_reagent_reuse_tips(ML_STAR.tmp_stock_1, ML_STAR.add_tmp_1, add_tmp_volume, 1, 1, ML_STAR.Tips_300_Channels, 8, ML_STAR);
        num_channels = 8;
        GSF_IMS_SHARED_SUBMETHODS::tip_pickup(ML_STAR.Tips_300_Channels, num_channels, ML_STAR);
        GSF_IMS_SHARED_SUBMETHODS::add_reagent_reuse_tips(ML_STAR.tmp_stock_2, ML_STAR.grad_start_tmp_2, grad_start_tmp_volume, 1, 0, ML_STAR.Tips_300_Channels, num_channels, ML_STAR);
        GSF_IMS_SHARED_SUBMETHODS::add_reagent_reuse_tips(ML_STAR.tmp_stock_2, ML_STAR.add_tmp_2, add_tmp_volume, 0, 0, ML_STAR.Tips_300_Channels, num_channels, ML_STAR);
        GSF_IMS_SHARED_SUBMETHODS::tip_eject(num_channels, ML_STAR);
      }
    }
    else
    {
    }
    MECC::TraceComment(Translate("==============================================================\nDilute inducer (e.g. 1S-TIQ, Van) stock into appropriate wells\n=============================================================="));
    if (is_pipetting == "true")
    {
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(ML_STAR.inducer_stock_1, ML_STAR.add_ind_1, add_inducer_volume, 0, 0, ML_STAR.Tips_300_Channels, 8, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(ML_STAR.inducer_stock_1_4, ML_STAR.grad_start_ind_1, grad_start_inducer_volume, 0, 0, ML_STAR.Tips_300_Channels, 4, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(ML_STAR.inducer_stock_2, ML_STAR.add_ind_2, add_inducer_volume, 0, 0, ML_STAR.Tips_300_Channels, 8, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(ML_STAR.inducer_stock_2_4, ML_STAR.grad_start_ind_2, grad_start_inducer_volume, 0, 0, ML_STAR.Tips_300_Channels, 4, ML_STAR);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_2.SetOutput(Translate("Reagent stock plate to Growth plate"), "\n");
        dialogHandle_2.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    MECC::TraceComment(Translate("***************************************************\nReplace lid onto Reagent stock plate.\n***************************************************"));
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nPipete inducer dilution gradients\n=============================================================="));
    if (is_pipetting == "true")
    {
      mix_volume = media_volume * 1;
      GSF_IMS_SHARED_SUBMETHODS::pipette_dil_series(ML_STAR.inducer_grad_from, ML_STAR.inducer_grad_to, dil_series_transf_vol, 2, mix_volume, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_3.SetOutput(Translate("Growth plate and Abgene plate"), "\n");
        dialogHandle_3.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    MECC::TraceComment(Translate("***************************************************\nReplace lid onto Growth plate.\n***************************************************"));
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CalculateOutputs();
    SaveWorklistAndMetadata();
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_ExitLibrary();
  } }
