 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
 namespace _Method { #include "GSF-IMS Project\\GSF-IMS.shared_submethods.hs_" }
 namespace _Method { #include "HSLExtensions\\Sequence.hsl" }
#include "Fitness Selection.Marionette protease.res"
variable plasmid_1_id;
variable worklist_file_path;
variable strain_1_id;
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable culture_volume;
variable mix_volume;
variable is_debugging;
dialog dialogHandle_1;
dialog dialogHandle_2;
variable dilution_factor;
variable media_volume;
variable cell_volume;
variable sequence_number;
dialog dialogHandle_3;
variable dil_series_factor;
variable dil_series_multiplier;
variable dil_series_transf_vol;
variable inducer_2_id;
variable inducer_1_id;
variable inducer_1_units;
variable inducer_2_units;
variable inducer_1_stock_concentration;
variable inducer_ref_volume;
variable plasmid_2_id;
variable plasmid_4_id;
variable plasmid_3_id;
variable plate_number;
variable additive_1_units;
variable additive_1_stock_concentration;
variable additive_1_id;
global device ML_STAR ("Fitness Selection.Marionette protease.lay", "ML_STAR", hslTrue);
variable first_tmp_seq;
variable tmp_ref_volume;
variable with_tmp;
variable grad_start_tmp_volume;
variable grad_start_media_volume_0;
variable grad_start_media_vol_with_tmp;
variable tmp_volume;
variable media_volume_with_tmp;
variable grad_start_sal_volume;
variable grad_start_media_vol_with_sal;
variable sal_volume;
variable media_volume_with_sal;
variable grad_start_media_vol_with_tmp_and_sal;
variable media_volume_with_tmp_and_sal;
variable van_grad_start_volume;
dialog dialogHandle_4;
sequence grad_start_add_sal_arr[];
sequence regular_add_sal_arr[];
variable pipette_volume;
variable inducer_2_4_stock_concentration;
variable inducer_2_3_stock_concentration;
variable inducer_2_2_stock_concentration;
variable inducer_2_1_stock_concentration;
variable sal_grad_num;
sequence sal_stock_arr[];
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("==============================================================\nThis method used for preparing plate 2, with inducer gradient but no selector\n\nIt uses 16 1000 uL tips and 8 300 uL tips\nand 1.2 mL of inducer stock\n=============================================================="));
    GetParams();
    StartUp();
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_source_lid, ML_STAR.Lid_parking_Media_trough, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    dil_series_multiplier = dil_series_factor - 1.0;
    dil_series_multiplier = dil_series_factor / (dil_series_multiplier * 1.0);
    cell_volume = culture_volume / (dilution_factor * 1.0);
    media_volume = culture_volume - cell_volume;
    dil_series_transf_vol = media_volume * dil_series_multiplier;
    dil_series_transf_vol = dil_series_transf_vol - media_volume;
    first_tmp_seq = 2;
    if (sequence_number < first_tmp_seq)
    {
      inducer_ref_volume = culture_volume;
      tmp_ref_volume = culture_volume;
      with_tmp = 0;
    }
    else
    {
      with_tmp = 1;
      if (sequence_number == first_tmp_seq)
      {
        inducer_ref_volume = media_volume;
        tmp_ref_volume = culture_volume;
      }
      else
      {
        if (sequence_number > first_tmp_seq)
        {
          inducer_ref_volume = media_volume;
          tmp_ref_volume = media_volume;
        }
      }
    }
    van_grad_start_volume = inducer_ref_volume / (2 * 1.0);
    van_grad_start_volume = van_grad_start_volume * dil_series_multiplier;
    grad_start_media_volume_0 = media_volume * dil_series_multiplier;
    grad_start_media_volume_0 = grad_start_media_volume_0 - van_grad_start_volume;
    grad_start_sal_volume = inducer_ref_volume / (10 * 1.0);
    grad_start_sal_volume = grad_start_sal_volume * dil_series_multiplier;
    grad_start_media_vol_with_sal = grad_start_media_volume_0 - grad_start_sal_volume;
    sal_volume = inducer_ref_volume / (10 * 1.0);
    media_volume_with_sal = media_volume - sal_volume;
    if (with_tmp == 1)
    {
      grad_start_tmp_volume = tmp_ref_volume / (10 * 1.0);
      grad_start_tmp_volume = grad_start_tmp_volume * dil_series_multiplier;
      grad_start_media_vol_with_tmp = grad_start_media_volume_0 - grad_start_tmp_volume;
      grad_start_media_vol_with_tmp_and_sal = grad_start_media_vol_with_tmp - grad_start_sal_volume;
      tmp_volume = tmp_ref_volume / (10 * 1.0);
      media_volume_with_tmp = media_volume - tmp_volume;
      media_volume_with_tmp_and_sal = media_volume_with_tmp - sal_volume;
    }
    else
    {
      grad_start_tmp_volume = 0;
      tmp_volume = 0;
      grad_start_media_vol_with_tmp = grad_start_media_volume_0 - grad_start_tmp_volume;
      grad_start_media_vol_with_tmp_and_sal = grad_start_media_vol_with_tmp - grad_start_sal_volume;
      media_volume_with_tmp = media_volume - tmp_volume;
      media_volume_with_tmp_and_sal = media_volume_with_tmp - sal_volume;
    }
    TrcTrace(Translate("dil_series_factor: "), dil_series_factor);
    TrcTrace(Translate("dilution_factor: "), dilution_factor);
    TrcTrace(Translate("cell_volume: "), cell_volume);
    TrcTrace(Translate("media_volume: "), media_volume);
    TrcTrace(Translate("dil_series_transf_vol: "), dil_series_transf_vol);
    TrcTrace(Translate("sal_volume: "), sal_volume);
    TrcTrace(Translate("with_tmp: "), with_tmp);
    TrcTrace(Translate("tmp_volume: "), tmp_volume);
    TrcTrace(Translate("sequence_number: "), sequence_number);
    MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate and gradient starter plate\n=============================================================="));
    if (is_pipetting == "true")
    {
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", 0);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
      PTL::SetTipHandlingState("TipCountingIdentifier", "");
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupChannelVariable", "");
      PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
      if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_1000_Channels) )
      {
            PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
      pipette_media(ML_STAR.med_regular_no_tmp_no_sal, media_volume, 1);
      pipette_media(ML_STAR.med_regular_with_tmp_no_sal, media_volume_with_tmp, 2);
      pipette_media(ML_STAR.med_regular_with_tmp_with_sal, media_volume_with_tmp_and_sal, 2);
      pipette_media(ML_STAR.med_grad_start_no_tmp_no_sal, grad_start_media_volume_0, 2);
      pipette_media(ML_STAR.med_grad_start_with_tmp_no_sal, grad_start_media_vol_with_tmp, 2);
      pipette_media(ML_STAR.med_grad_start_with_tmp_with_sal, grad_start_media_vol_with_tmp_and_sal, 2);
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectChannelVariable", "");
      if( 0 == PTL::TipEject(ML_STAR) )
      {
            PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
      ML_STAR.Media_pipette_from.SetCurrentPosition(1);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_1.SetOutput(Translate("media into growth plate"), "\n", Translate("media into Abgene plate"), "\n");
        dialogHandle_1.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Media_trough, ML_STAR.Media_source_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    if (with_tmp == 1)
    {
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", 0);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
      PTL::SetTipHandlingState("TipCountingIdentifier", "");
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupChannelVariable", "");
      PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
      if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_300_Channels) )
      {
            PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
      pipette_selector(ML_STAR.TMP_10x_stock, ML_STAR.grad_start_add_tmp, grad_start_tmp_volume, 1, ML_STAR.TMP_prewet_1, ML_STAR.TMP_prewet_2);
      pipette_selector(ML_STAR.TMP_10x_stock, ML_STAR.regular_add_tmp, tmp_volume, 2, ML_STAR.TMP_prewet_1, ML_STAR.TMP_prewet_2);
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectChannelVariable", "");
      if( 0 == PTL::TipEject(ML_STAR) )
      {
            PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    MECC::TraceComment(Translate("==============================================================\nDilute inducer (e.g. Van) stock into grad_start wells\n=============================================================="));
    if (is_pipetting == "true")
    {
      MECC::TraceComment(Translate("****  pipette inducer to grad_start wells"));
      pipette_inducer(ML_STAR.Tips_1000_Channels, ML_STAR.Van_stock, ML_STAR.grad_start_add_van, van_grad_start_volume);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_3.SetOutput(Translate("Reagent stock plate to Growth plate"), "\n");
        dialogHandle_3.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    MECC::TraceComment(Translate("==============================================================\nDilute second inducer (e.g. Sal) stock into appropirate wells\n=============================================================="));
    if (is_pipetting == "true")
    {
      MECC::TraceComment(Translate("****  pipette Sal inducer to wells with Sal"));
      grad_start_add_sal_arr.SetSize(0);
      grad_start_add_sal_arr.AddAsLast(ML_STAR.grad_start_add_sal_1);
      grad_start_add_sal_arr.AddAsLast(ML_STAR.grad_start_add_sal_2);
      grad_start_add_sal_arr.AddAsLast(ML_STAR.grad_start_add_sal_3);
      grad_start_add_sal_arr.AddAsLast(ML_STAR.grad_start_add_sal_4);
      regular_add_sal_arr.SetSize(0);
      regular_add_sal_arr.AddAsLast(ML_STAR.regular_add_sal_1);
      regular_add_sal_arr.AddAsLast(ML_STAR.regular_add_sal_2);
      regular_add_sal_arr.AddAsLast(ML_STAR.regular_add_sal_3);
      regular_add_sal_arr.AddAsLast(ML_STAR.regular_add_sal_4);
      sal_stock_arr.SetSize(0);
      sal_stock_arr.AddAsLast(ML_STAR.Sal_stock_1);
      sal_stock_arr.AddAsLast(ML_STAR.Sal_stock_2);
      sal_stock_arr.AddAsLast(ML_STAR.Sal_stock_3);
      sal_stock_arr.AddAsLast(ML_STAR.Sal_stock_4);
      {
        for(sal_grad_num = 0; sal_grad_num < 4;)
        {
          sal_grad_num = sal_grad_num + 1;
          pipette_inducer(ML_STAR.Tips_300_Channels, sal_stock_arr.ElementAt( sal_grad_num -1), grad_start_add_sal_arr.ElementAt( sal_grad_num -1), grad_start_sal_volume);
          pipette_inducer(ML_STAR.Tips_300_Channels, sal_stock_arr.ElementAt( sal_grad_num -1), regular_add_sal_arr.ElementAt( sal_grad_num -1), sal_volume);
        }
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_4.SetOutput(Translate("Reagent stock plate to Growth plate"), "\n");
        dialogHandle_4.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nPipete inducer dilution gradients\n=============================================================="));
    if (is_pipetting == "true")
    {
      pipette_volume = dil_series_transf_vol;
      mix_volume = media_volume * 1;
      pipette_dil_series(ML_STAR.inducer_gradient_1_from, ML_STAR.inducer_gradient_1_to, pipette_volume, mix_volume, 8);
      pipette_dil_series(ML_STAR.inducer_gradient_2_from, ML_STAR.inducer_gradient_2_to, pipette_volume, mix_volume, 8);
      pipette_dil_series(ML_STAR.inducer_gradient_3_from, ML_STAR.inducer_gradient_3_to, pipette_volume, mix_volume, 8);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_2.SetOutput(Translate("Growth plate and Abgene plate"), "\n");
        dialogHandle_2.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    if (plate_number == 1)
    {
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
      PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Lid_parking_Old_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    }
    else
    {
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
    }
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CalculateOutputs();
    SaveWorklistAndMetadata();
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_ExitLibrary();
  } }
