 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
 namespace _Method { #include "GSF-IMS Project\\GSF-IMS.shared_submethods.hs_" }
 namespace _Method { #include "HSLExtensions\\Sequence.hsl" }
#include "Fitness Selection.Marionette protease.v2.res"
variable plasmid_1_id;
variable worklist_file_path;
variable strain_1_id;
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable culture_volume;
variable is_debugging;
dialog dialogHandle_1;
variable dilution_factor;
variable media_volume;
variable cell_volume;
variable sequence_number;
variable inducer_2_id;
variable inducer_1_id;
variable inducer_1_units;
variable inducer_2_units;
variable inducer_1_stock_concentration;
variable inducer_ref_volume;
variable plasmid_2_id;
variable plasmid_4_id;
variable plasmid_3_id;
variable plate_number;
variable additive_1_units;
variable additive_1_stock_concentration;
variable additive_1_id;
variable first_tmp_seq;
variable tmp_ref_volume;
variable tmp_volume;
variable inducer_2_2_stock_concentration;
variable inducer_2_1_stock_concentration;
global device ML_STAR ("Fitness Selection.Marionette protease.v2.lay", "ML_STAR", hslTrue);
variable sal_conc_arr[];
variable van_conc_arr[];
variable with_tmp;
variable van_vol_arr[];
variable van_num;
variable van_length;
variable gp_conc;
variable van_vol;
variable sal_vol_arr[];
variable sal_length;
variable sal_num;
variable sal_vol;
sequence add_sal_seq_arr[];
sequence med_tmp_van1_sal_arr[];
sequence med_tmp_van2_sal_arr[];
variable pipette_vol;
sequence asp_seq;
sequence disp_seq;
dialog dialogHandle_2;
dialog dialogHandle_3;
variable max_sal;
variable inducer_2_3_stock_concentration;
variable use_sal_stock_arr[];
variable use_sal_stock;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("==============================================================\nThis method used for preparing plate 2, with inducer gradient but no selector\n\nIt uses 16 1000 uL tips and 8 300 uL tips\nand 1.2 mL of inducer stock\n=============================================================="));
    GetParams();
    StartUp();
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_source_lid, ML_STAR.Lid_parking_Media_trough, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    cell_volume = culture_volume / (dilution_factor * 1.0);
    media_volume = culture_volume - cell_volume;
    first_tmp_seq = 2;
    if (sequence_number < first_tmp_seq)
    {
      inducer_ref_volume = culture_volume;
      tmp_ref_volume = culture_volume;
      with_tmp = 0;
    }
    else
    {
      with_tmp = 1;
      if (sequence_number == first_tmp_seq)
      {
        inducer_ref_volume = media_volume;
        tmp_ref_volume = culture_volume;
      }
      else
      {
        if (sequence_number > first_tmp_seq)
        {
          inducer_ref_volume = media_volume;
          tmp_ref_volume = media_volume;
        }
      }
    }
    if (with_tmp == 1)
    {
      tmp_volume = tmp_ref_volume / (20 * 1.0);
      max_sal = 70;
    }
    else
    {
      tmp_volume = 0;
      max_sal = 110;
    }
    van_vol_arr.SetSize(0);
    van_length=van_conc_arr.GetSize();
    {
      for(van_num = 0; van_num < van_length;)
      {
        van_num = van_num + 1;
        gp_conc=van_conc_arr.GetAt(van_num-1);
        van_vol = gp_conc / (inducer_1_stock_concentration * 1.0);
        van_vol = van_vol * inducer_ref_volume;
        van_vol_arr.AddAsLast(van_vol);
      }
    }
    sal_vol_arr.SetSize(0);
    use_sal_stock_arr.SetSize(0);
    sal_length=sal_conc_arr.GetSize();
    {
      for(sal_num = 0; sal_num < sal_length;)
      {
        sal_num = sal_num + 1;
        gp_conc=sal_conc_arr.GetAt(sal_num-1);
        sal_vol = gp_conc / (inducer_2_1_stock_concentration * 1.0);
        sal_vol = sal_vol * inducer_ref_volume;
        if (sal_vol <= max_sal)
        {
          use_sal_stock = 1;
        }
        else
        {
          sal_vol = gp_conc / (inducer_2_2_stock_concentration * 1.0);
          sal_vol = sal_vol * inducer_ref_volume;
          if (sal_vol <= max_sal)
          {
            use_sal_stock = 2;
          }
          else
          {
            sal_vol = gp_conc / (inducer_2_3_stock_concentration * 1.0);
            sal_vol = sal_vol * inducer_ref_volume;
            use_sal_stock = 3;
          }
        }
        sal_vol_arr.AddAsLast(sal_vol);
        use_sal_stock_arr.AddAsLast(use_sal_stock);
        TrcTrace4(Translate("sal "), sal_num, Translate(" volume: "), sal_vol);
        TrcTrace(Translate("    use_sal_stock: "), use_sal_stock);
      }
    }
    add_sal_seq_arr.SetSize(0);
    add_sal_seq_arr.AddAsLast(ML_STAR.add_sal_1);
    add_sal_seq_arr.AddAsLast(ML_STAR.add_sal_2);
    add_sal_seq_arr.AddAsLast(ML_STAR.add_sal_3);
    add_sal_seq_arr.AddAsLast(ML_STAR.add_sal_4);
    add_sal_seq_arr.AddAsLast(ML_STAR.add_sal_5);
    add_sal_seq_arr.AddAsLast(ML_STAR.add_sal_6);
    add_sal_seq_arr.AddAsLast(ML_STAR.add_sal_7);
    add_sal_seq_arr.AddAsLast(ML_STAR.add_sal_8);
    add_sal_seq_arr.AddAsLast(ML_STAR.add_sal_9);
    add_sal_seq_arr.AddAsLast(ML_STAR.add_sal_10);
    add_sal_seq_arr.AddAsLast(ML_STAR.add_sal_11);
    med_tmp_van1_sal_arr.SetSize(0);
    med_tmp_van1_sal_arr.AddAsLast(ML_STAR.med_tmp_van1_sal1);
    med_tmp_van1_sal_arr.AddAsLast(ML_STAR.med_tmp_van1_sal2);
    med_tmp_van1_sal_arr.AddAsLast(ML_STAR.med_tmp_van1_sal3);
    med_tmp_van1_sal_arr.AddAsLast(ML_STAR.med_tmp_van1_sal4);
    med_tmp_van1_sal_arr.AddAsLast(ML_STAR.med_tmp_van1_sal5);
    med_tmp_van1_sal_arr.AddAsLast(ML_STAR.med_tmp_van1_sal6);
    med_tmp_van1_sal_arr.AddAsLast(ML_STAR.med_tmp_van1_sal7);
    med_tmp_van1_sal_arr.AddAsLast(ML_STAR.med_tmp_van1_sal8);
    med_tmp_van1_sal_arr.AddAsLast(ML_STAR.med_tmp_van1_sal9);
    med_tmp_van1_sal_arr.AddAsLast(ML_STAR.med_tmp_van1_sal10);
    med_tmp_van1_sal_arr.AddAsLast(ML_STAR.med_tmp_van1_sal11);
    med_tmp_van2_sal_arr.SetSize(0);
    med_tmp_van2_sal_arr.AddAsLast(ML_STAR.med_tmp_van2_sal1);
    med_tmp_van2_sal_arr.AddAsLast(ML_STAR.med_tmp_van2_sal2);
    med_tmp_van2_sal_arr.AddAsLast(ML_STAR.med_tmp_van2_sal3);
    med_tmp_van2_sal_arr.AddAsLast(ML_STAR.med_tmp_van2_sal4);
    med_tmp_van2_sal_arr.AddAsLast(ML_STAR.med_tmp_van2_sal5);
    med_tmp_van2_sal_arr.AddAsLast(ML_STAR.med_tmp_van2_sal6);
    med_tmp_van2_sal_arr.AddAsLast(ML_STAR.med_tmp_van2_sal7);
    med_tmp_van2_sal_arr.AddAsLast(ML_STAR.med_tmp_van2_sal8);
    med_tmp_van2_sal_arr.AddAsLast(ML_STAR.med_tmp_van2_sal9);
    med_tmp_van2_sal_arr.AddAsLast(ML_STAR.med_tmp_van2_sal10);
    med_tmp_van2_sal_arr.AddAsLast(ML_STAR.med_tmp_van2_sal11);
    TrcTrace(Translate("dilution_factor: "), dilution_factor);
    TrcTrace(Translate("cell_volume: "), cell_volume);
    TrcTrace(Translate("media_volume: "), media_volume);
    TrcTrace(Translate("with_tmp: "), with_tmp);
    TrcTrace(Translate("tmp_volume: "), tmp_volume);
    TrcTrace(Translate("sequence_number: "), sequence_number);
    MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate\n=============================================================="));
    if (is_pipetting == "true")
    {
      GSF_IMS_SHARED_SUBMETHODS::tip_pickup(ML_STAR.Tips_1000_Channels, 4, ML_STAR);
      pipette_vol = media_volume - van_vol_arr.ElementAt( 1 -1);
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from_4, ML_STAR.med_van_1, pipette_vol, 1, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
      pipette_vol = media_volume - van_vol_arr.ElementAt( 2 -1);
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from_4, ML_STAR.med_van_2, pipette_vol, 0, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
      {
        for(sal_num = 0; sal_num < sal_length;)
        {
          sal_num = sal_num + 1;
          pipette_vol = media_volume - van_vol_arr.ElementAt( 1 -1);
          pipette_vol = pipette_vol - sal_vol_arr.ElementAt( sal_num -1);
          if (with_tmp == 1)
          {
            pipette_vol = pipette_vol - tmp_volume;
          }
          disp_seq=med_tmp_van1_sal_arr.GetAt(sal_num-1);
          TrcTrace(Translate("with van1, pipetting sal "), sal_num);
          GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from_4, disp_seq, pipette_vol, 0, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
          pipette_vol = media_volume - van_vol_arr.ElementAt( 2 -1);
          pipette_vol = pipette_vol - sal_vol_arr.ElementAt( sal_num -1);
          if (with_tmp == 1)
          {
            pipette_vol = pipette_vol - tmp_volume;
          }
          disp_seq=med_tmp_van2_sal_arr.GetAt(sal_num-1);
          TrcTrace(Translate("with van2, pipetting sal "), sal_num);
          GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from_4, disp_seq, pipette_vol, 0, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
        }
      }
      GSF_IMS_SHARED_SUBMETHODS::tip_eject(4, ML_STAR);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_1.SetOutput(Translate("media into growth plate"), "\n", Translate("media into Abgene plate"), "\n");
        dialogHandle_1.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Media_trough, ML_STAR.Media_source_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nAdd TMP\n=============================================================="));
    if (with_tmp == 1)
    {
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_reuse_tips(ML_STAR.TMP_10x_stock, ML_STAR.add_tmp, tmp_volume, 1, 1, ML_STAR.Tips_300_Channels, 8, ML_STAR);
    }
    MECC::TraceComment(Translate("==============================================================\nAdd Sal\n=============================================================="));
    if (is_pipetting == "true")
    {
      if (with_tmp == 1)
      {
      }
      else
      {
        GSF_IMS_SHARED_SUBMETHODS::tip_pickup(ML_STAR.Tips_300_Channels, 8, ML_STAR);
      }
      {
        for(sal_num = 0; sal_num < sal_length;)
        {
          sal_num = sal_num + 1;
          if (use_sal_stock_arr.ElementAt( sal_num -1) == 1)
          {
            SeqCopySequence(asp_seq, ML_STAR.Sal_stock_1);
          }
          else
          {
            if (use_sal_stock_arr.ElementAt( sal_num -1) == 2)
            {
              SeqCopySequence(asp_seq, ML_STAR.Sal_stock_2);
            }
            else
            {
              if (use_sal_stock_arr.ElementAt( sal_num -1) == 3)
              {
                SeqCopySequence(asp_seq, ML_STAR.Sal_stock_3);
              }
            }
          }
          disp_seq=add_sal_seq_arr.GetAt(sal_num-1);
          pipette_vol=sal_vol_arr.GetAt(sal_num-1);
          if (pipette_vol > 0)
          {
            if (with_tmp == 1)
            {
              if (pipette_vol >= 50)
              {
                GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(asp_seq, disp_seq, pipette_vol, 0, 0, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
              }
              else
              {
                GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(asp_seq, disp_seq, pipette_vol, 0, 0, ML_STAR.Tips_300_Channels, 8, ML_STAR);
              }
            }
            else
            {
              GSF_IMS_SHARED_SUBMETHODS::add_reagent_reuse_tips(asp_seq, disp_seq, pipette_vol, 0, 0, ML_STAR.Tips_300_Channels, 8, ML_STAR);
            }
          }
        }
      }
      if (with_tmp == 1)
      {
      }
      else
      {
        GSF_IMS_SHARED_SUBMETHODS::tip_eject(8, ML_STAR);
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_2.SetOutput(Translate("media into growth plate"), "\n", Translate("media into Abgene plate"), "\n");
        dialogHandle_2.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    MECC::TraceComment(Translate("==============================================================\nAdd Van\n=============================================================="));
    SeqCopySequence(asp_seq, ML_STAR.Van_stock_1);
    if (plate_number == 3)
    {
      SeqCopySequence(asp_seq, ML_STAR.Van_stock_2);
    }
    if (plate_number == 5)
    {
      SeqCopySequence(asp_seq, ML_STAR.Van_stock_2);
    }
    if (is_pipetting == "true")
    {
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(asp_seq, ML_STAR.add_van_1, van_vol_arr.ElementAt( 1 -1), 0, 0, ML_STAR.Tips_300_Channels, 8, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(asp_seq, ML_STAR.add_van_2, van_vol_arr.ElementAt( 2 -1), 0, 0, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_3.SetOutput(Translate("media into growth plate"), "\n", Translate("media into Abgene plate"), "\n");
        dialogHandle_3.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CalculateOutputs();
    SaveWorklistAndMetadata();
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_ExitLibrary();
  } }
