 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
 namespace _Method { #include "GSF-IMS Project\\GSF-IMS.shared_submethods.hs_" }
 namespace _Method { #include "HSLExtensions\\Sequence.hsl" }
#include "Fitness Selection.Marionette protease.v3.res"
variable plasmid_1_id;
variable worklist_file_path;
variable strain_1_id;
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable culture_volume;
variable is_debugging;
dialog dialogHandle_1;
variable dilution_factor;
variable media_volume;
variable cell_volume;
variable inducer_2_id;
variable inducer_1_id;
variable inducer_1_units;
variable inducer_2_units;
variable inducer_ref_volume;
variable plasmid_2_id;
variable plasmid_4_id;
variable plasmid_3_id;
variable plate_number;
variable additive_1_units;
variable additive_1_stock_concentration;
variable additive_1_id;
variable tmp_ref_volume;
variable tmp_volume;
variable van_conc_arr[];
variable with_tmp;
variable van_vol_arr[];
variable van_num;
variable van_length;
variable gp_conc;
variable van_vol;
variable pipette_vol;
sequence asp_seq;
dialog dialogHandle_2;
global device ML_STAR ("Fitness Selection.Marionette protease.v3.lay", "ML_STAR", hslTrue);
variable inducer_1_2_stock_concentration;
variable inducer_1_1_stock_concentration;
variable inducer_2_stock_concentration;
variable inducer_1_3_stock_concentration;
variable max_van;
variable use_van_stock_arr[];
variable use_van_stock;
variable sal_conc;
variable sal_vol;
variable pipetting_counter;
variable p_vol_arr[];
variable use_van_stock_no_tmp_arr[];
variable van_vol_no_tmp_arr[];
variable copy_ind_arr[];
variable van_length_no_tmp;
variable copy_ind;
variable van_stock_counter;
sequence van_stock_arr[];
variable p_vol;
variable pre_wet_tips;
variable sal_tmp_stock_dilution;
variable tmp_conc;
variable first_tmp_plate;
dialog dialogHandle_3;
variable van_conc_no_tmp_arr[];
variable van_conc;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("==============================================================\nThis method used for preparing plates 2-5\n=============================================================="));
    GetParams();
    StartUp();
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_source_lid, ML_STAR.Lid_parking_Media_trough, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    van_stock_arr.SetSize(0);
    van_stock_arr.AddAsLast(ML_STAR.Van_stock_1_4);
    van_stock_arr.AddAsLast(ML_STAR.Van_stock_2_4);
    van_stock_arr.AddAsLast(ML_STAR.Van_stock_3_4);
    cell_volume = culture_volume / (dilution_factor * 1.0);
    media_volume = culture_volume - cell_volume;
    first_tmp_plate = 3;
    if (plate_number < first_tmp_plate)
    {
      inducer_ref_volume = culture_volume;
      tmp_ref_volume = culture_volume;
      with_tmp = 0;
    }
    else
    {
      with_tmp = 1;
      if (plate_number == first_tmp_plate)
      {
        inducer_ref_volume = media_volume;
        tmp_ref_volume = culture_volume;
      }
      else
      {
        if (plate_number > first_tmp_plate)
        {
          inducer_ref_volume = media_volume;
          tmp_ref_volume = media_volume;
        }
      }
    }
    if (with_tmp == 1)
    {
      tmp_volume = tmp_ref_volume / (sal_tmp_stock_dilution * 1.0);
      max_van = 100;
    }
    else
    {
      tmp_volume = 0;
      max_van = 100;
    }
    sal_vol = sal_conc / (inducer_2_stock_concentration * 1.0);
    sal_vol = sal_vol * inducer_ref_volume;
    use_van_stock_arr.SetSize(0);
    van_vol_arr.SetSize(0);
    van_length=van_conc_arr.GetSize();
    {
      for(van_num = 0; van_num < van_length;)
      {
        van_num = van_num + 1;
        gp_conc=van_conc_arr.GetAt(van_num-1);
        van_vol = gp_conc / (inducer_1_1_stock_concentration * 1.0);
        van_vol = van_vol * inducer_ref_volume;
        if (van_vol <= max_van)
        {
          use_van_stock = 1;
        }
        else
        {
          van_vol = gp_conc / (inducer_1_2_stock_concentration * 1.0);
          van_vol = van_vol * inducer_ref_volume;
          if (van_vol <= max_van)
          {
            use_van_stock = 2;
          }
          else
          {
            van_vol = gp_conc / (inducer_1_3_stock_concentration * 1.0);
            van_vol = van_vol * inducer_ref_volume;
            use_van_stock = 3;
          }
        }
        van_vol_arr.AddAsLast(van_vol);
        use_van_stock_arr.AddAsLast(use_van_stock);
        TrcTrace4(Translate("van "), van_num, Translate(" volume: "), van_vol);
        TrcTrace(Translate("    use_van_stock: "), use_van_stock);
      }
    }
    use_van_stock_no_tmp_arr.SetSize(0);
    van_vol_no_tmp_arr.SetSize(0);
    van_conc_no_tmp_arr.SetSize(0);
    copy_ind_arr.SetSize(0);
    copy_ind_arr.AddAsLast(1);
    copy_ind_arr.AddAsLast(10);
    copy_ind_arr.AddAsLast(13);
    copy_ind_arr.AddAsLast(16);
    copy_ind_arr.AddAsLast(19);
    van_length_no_tmp=copy_ind_arr.GetSize();
    {
      for(van_num = 0; van_num < van_length_no_tmp;)
      {
        van_num = van_num + 1;
        copy_ind=copy_ind_arr.GetAt(van_num-1);
        use_van_stock=use_van_stock_arr.GetAt(copy_ind-1);
        use_van_stock_no_tmp_arr.AddAsLast(use_van_stock);
        van_vol=van_vol_arr.GetAt(copy_ind-1);
        van_vol_no_tmp_arr.AddAsLast(van_vol);
        TrcTrace4(Translate("no TMP van "), van_num, Translate(" volume: "), van_vol);
        TrcTrace(Translate("    use_van_stock: "), use_van_stock);
        van_conc=van_conc_arr.GetAt(copy_ind-1);
        van_conc_no_tmp_arr.AddAsLast(van_conc);
      }
    }
    TrcTrace(Translate("dilution_factor: "), dilution_factor);
    TrcTrace(Translate("cell_volume: "), cell_volume);
    TrcTrace(Translate("media_volume: "), media_volume);
    TrcTrace(Translate("with_tmp: "), with_tmp);
    TrcTrace(Translate("tmp_volume: "), tmp_volume);
    TrcTrace(Translate("plate_number: "), plate_number);
    MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate\n=============================================================="));
    if (is_pipetting == "true")
    {
      GSF_IMS_SHARED_SUBMETHODS::tip_pickup(ML_STAR.Tips_1000_Channels, 4, ML_STAR);
      p_vol_arr.SetSize(0);
      {
        for(pipetting_counter = 0; pipetting_counter < van_length;)
        {
          pipetting_counter = pipetting_counter + 1;
          pipette_vol = media_volume;
          pipette_vol = pipette_vol - tmp_volume;
          if (plate_number <= first_tmp_plate)
          {
            pipette_vol = pipette_vol - sal_vol;
          }
          pipette_vol = pipette_vol - van_vol_arr.ElementAt( pipetting_counter -1);
          p_vol_arr.AddAsLast(pipette_vol);
        }
      }
      GSF_IMS_SHARED_SUBMETHODS::pipette_media_volume_arr(ML_STAR.Media_pipette_from_4, ML_STAR.wells_with_tmp, p_vol_arr, 1, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
      p_vol_arr.SetSize(0);
      {
        for(pipetting_counter = 0; pipetting_counter < van_length_no_tmp;)
        {
          pipetting_counter = pipetting_counter + 1;
          pipette_vol = media_volume;
          pipette_vol = pipette_vol - van_vol_no_tmp_arr.ElementAt( pipetting_counter -1);
          p_vol_arr.AddAsLast(pipette_vol);
        }
      }
      GSF_IMS_SHARED_SUBMETHODS::pipette_media_volume_arr(ML_STAR.Media_pipette_from_4, ML_STAR.wells_without_tmp, p_vol_arr, 0, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::tip_eject(4, ML_STAR);
      SeqResetSequenceIndexes(ML_STAR.wells_with_tmp);
      SeqResetSequenceIndexes(ML_STAR.wells_without_tmp);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_1.SetOutput(Translate("media into growth plate"), "\n", Translate("media into Abgene plate"), "\n");
        dialogHandle_1.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Media_trough, ML_STAR.Media_source_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nAdd Van\n=============================================================="));
    if (is_pipetting == "true")
    {
      GSF_IMS_SHARED_SUBMETHODS::tip_pickup(ML_STAR.Tips_300_Channels, 4, ML_STAR);
      {
        for(van_stock_counter = 0; van_stock_counter < 3;)
        {
          van_stock_counter = van_stock_counter + 1;
          pre_wet_tips = 1;
          asp_seq=van_stock_arr.GetAt(van_stock_counter-1);
          p_vol_arr.SetSize(0);
          {
            for(pipetting_counter = 0; pipetting_counter < van_length;)
            {
              pipetting_counter = pipetting_counter + 1;
              if (use_van_stock_arr.ElementAt( pipetting_counter -1) == van_stock_counter)
              {
                p_vol=van_vol_arr.GetAt(pipetting_counter-1);
              }
              else
              {
                p_vol = 0;
              }
              p_vol_arr.AddAsLast(p_vol);
            }
          }
          GSF_IMS_SHARED_SUBMETHODS::add_reagents_reuse_tips_vol_arr(asp_seq, ML_STAR.wells_with_tmp, p_vol_arr, pre_wet_tips, 0, ML_STAR.Tips_300_Channels, 4, ML_STAR);
          p_vol_arr.SetSize(0);
          {
            for(pipetting_counter = 0; pipetting_counter < van_length_no_tmp;)
            {
              pipetting_counter = pipetting_counter + 1;
              if (use_van_stock_no_tmp_arr.ElementAt( pipetting_counter -1) == van_stock_counter)
              {
                p_vol=van_vol_no_tmp_arr.GetAt(pipetting_counter-1);
              }
              else
              {
                p_vol = 0;
              }
              p_vol_arr.AddAsLast(p_vol);
            }
          }
          GSF_IMS_SHARED_SUBMETHODS::add_reagents_reuse_tips_vol_arr(asp_seq, ML_STAR.wells_without_tmp, p_vol_arr, 0, 0, ML_STAR.Tips_300_Channels, 4, ML_STAR);
          pre_wet_tips = 0;
          SeqResetSequenceIndexes(ML_STAR.wells_with_tmp);
          SeqResetSequenceIndexes(ML_STAR.wells_without_tmp);
        }
      }
      GSF_IMS_SHARED_SUBMETHODS::tip_eject(4, ML_STAR);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_2.SetOutput(Translate("media into growth plate"), "\n", Translate("media into Abgene plate"), "\n");
        dialogHandle_2.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    MECC::TraceComment(Translate("==============================================================\nAdd Sal, to wells with TMP, only for plate 2 or 3\n=============================================================="));
    if (plate_number <= first_tmp_plate)
    {
      if (is_pipetting == "true")
      {
        GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(ML_STAR.Sal_stock_1_4, ML_STAR.wells_with_tmp, sal_vol, 0, 0, ML_STAR.Tips_300_Channels, 4, ML_STAR);
        SeqResetSequenceIndexes(ML_STAR.wells_with_tmp);
      }
      else
      {
        if (is_debugging == "true")
        {
          dialogHandle_3.SetOutput(Translate("media into growth plate"), "\n", Translate("media into Abgene plate"), "\n");
          dialogHandle_3.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        }
      }
    }
    MECC::TraceComment(Translate("==============================================================\nAdd TMP\n=============================================================="));
    if (with_tmp == 1)
    {
      if (plate_number == first_tmp_plate)
      {
        GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(ML_STAR.TMP_stock_4, ML_STAR.wells_with_tmp, tmp_volume, 0, 0, ML_STAR.Tips_300_Channels, 4, ML_STAR);
      }
      else
      {
        GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(ML_STAR.Sal_plus_TMP_stock_4, ML_STAR.wells_with_tmp, tmp_volume, 0, 0, ML_STAR.Tips_300_Channels, 4, ML_STAR);
      }
      SeqResetSequenceIndexes(ML_STAR.wells_with_tmp);
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CalculateOutputs();
    SaveWorklistAndMetadata();
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_ExitLibrary();
  } }
