 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
 namespace _Method { #include "GSF-IMS Project\\GSF-IMS.shared_submethods.hs_" }
 namespace _Method { #include "HSLExtensions\\Sequence.hsl" }
#include "Fitness Selection.Marionette protease.v4.res"
variable plasmid_1_id;
variable worklist_file_path;
variable strain_1_id;
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable culture_volume;
variable is_debugging;
dialog dialogHandle_1;
variable dilution_factor;
variable media_volume;
variable cell_volume;
variable inducer_2_id;
variable inducer_1_id;
variable inducer_1_units;
variable inducer_2_units;
variable inducer_ref_volume;
variable plasmid_2_id;
variable plasmid_4_id;
variable plasmid_3_id;
variable plate_number;
variable additive_1_units;
variable additive_1_stock_concentration;
variable additive_1_id;
variable tmp_ref_volume;
variable with_tmp;
dialog dialogHandle_2;
variable sal_tmp_stock_dilution;
variable tmp_conc;
variable first_tmp_plate;
global device ML_STAR ("Fitness Selection.Marionette protease.v4.lay", "ML_STAR", hslTrue);
variable inducer_1_stock_concentration;
variable dil_series_factor;
variable dil_series_multiplier;
variable dil_series_transf_vol;
variable grad_start_media_volume_0;
variable van_stock_dilution;
variable grad_start_van_volume;
variable grad_start_sal_volume;
variable sal_stock_conc_arr[];
variable grad_start_tmp_volume;
variable tmp_volume;
variable sal_volume;
variable p_vol;
variable dil_series_factor_no_tmp;
variable dil_series_multiplier_no_tmp;
variable dil_series_transf_vol_no_tmp;
variable grad_start_van_volume_no_tmp;
variable grad_start_med_vol_0_no_tmp;
dialog dialogHandle_3;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("==============================================================\nThis method used for preparing plates 2-5\n=============================================================="));
    GetParams();
    StartUp();
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_source_lid, ML_STAR.Lid_parking_Media_trough, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    dil_series_multiplier = dil_series_factor - 1.0;
    dil_series_multiplier = dil_series_factor / (dil_series_multiplier * 1.0);
    dil_series_multiplier_no_tmp = dil_series_factor_no_tmp - 1.0;
    dil_series_multiplier_no_tmp = dil_series_factor_no_tmp / (dil_series_multiplier_no_tmp * 1.0);
    cell_volume = culture_volume / (dilution_factor * 1.0);
    media_volume = culture_volume - cell_volume;
    dil_series_transf_vol = media_volume * dil_series_multiplier;
    dil_series_transf_vol = dil_series_transf_vol - media_volume;
    dil_series_transf_vol_no_tmp = media_volume * dil_series_multiplier_no_tmp;
    dil_series_transf_vol_no_tmp = dil_series_transf_vol_no_tmp - media_volume;
    first_tmp_plate = 3;
    if (plate_number < first_tmp_plate)
    {
      inducer_ref_volume = culture_volume;
      tmp_ref_volume = culture_volume;
      with_tmp = 0;
    }
    else
    {
      with_tmp = 1;
      if (plate_number == first_tmp_plate)
      {
        inducer_ref_volume = media_volume;
        tmp_ref_volume = culture_volume;
      }
      else
      {
        if (plate_number > first_tmp_plate)
        {
          inducer_ref_volume = media_volume;
          tmp_ref_volume = media_volume;
        }
      }
    }
    if (with_tmp == 1)
    {
      tmp_volume = tmp_ref_volume / (sal_tmp_stock_dilution * 1.0);
    }
    else
    {
      tmp_volume = 0;
    }
    grad_start_tmp_volume = tmp_volume * dil_series_multiplier;
    sal_volume = inducer_ref_volume / (sal_tmp_stock_dilution * 1.0);
    grad_start_sal_volume = sal_volume * dil_series_multiplier;
    grad_start_van_volume = inducer_ref_volume / (van_stock_dilution * 1.0);
    grad_start_van_volume = grad_start_van_volume * dil_series_multiplier;
    grad_start_van_volume_no_tmp = inducer_ref_volume / (van_stock_dilution * 1.0);
    grad_start_van_volume_no_tmp = grad_start_van_volume_no_tmp * dil_series_multiplier_no_tmp;
    grad_start_media_volume_0 = media_volume * dil_series_multiplier;
    grad_start_media_volume_0 = grad_start_media_volume_0 - grad_start_van_volume;
    grad_start_med_vol_0_no_tmp = media_volume * dil_series_multiplier_no_tmp;
    grad_start_med_vol_0_no_tmp = grad_start_med_vol_0_no_tmp - grad_start_van_volume_no_tmp;
    TrcTrace(Translate("dilution_factor: "), dilution_factor);
    TrcTrace(Translate("cell_volume: "), cell_volume);
    TrcTrace(Translate("media_volume: "), media_volume);
    TrcTrace(Translate("with_tmp: "), with_tmp);
    TrcTrace(Translate("tmp_volume: "), tmp_volume);
    TrcTrace(Translate("plate_number: "), plate_number);
    MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate\n=============================================================="));
    if (is_pipetting == "true")
    {
      GSF_IMS_SHARED_SUBMETHODS::tip_pickup(ML_STAR.Tips_1000_Channels, 4, ML_STAR);
      p_vol = media_volume;
      p_vol = p_vol - sal_volume;
      p_vol = p_vol - tmp_volume;
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from_4, ML_STAR.regular_wells_with_tmp, p_vol, 1, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
      p_vol = grad_start_media_volume_0;
      p_vol = p_vol - grad_start_sal_volume;
      p_vol = p_vol - grad_start_tmp_volume;
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from_4, ML_STAR.grad_start_wells_with_tmp, p_vol, 0, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
      p_vol = media_volume;
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from_4, ML_STAR.regular_wells_no_tmp, p_vol, 0, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
      p_vol = grad_start_med_vol_0_no_tmp;
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from_4, ML_STAR.grad_start_wells_no_tmp, p_vol, 0, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::tip_eject(4, ML_STAR);
      SeqResetSequenceIndexes(ML_STAR.regular_wells_with_tmp);
      SeqResetSequenceIndexes(ML_STAR.grad_start_wells_no_tmp);
      SeqResetSequenceIndexes(ML_STAR.grad_start_wells_with_tmp);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_1.SetOutput(Translate("media into growth plate"), "\n", Translate("media into Abgene plate"), "\n");
        dialogHandle_1.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Media_trough, ML_STAR.Media_source_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nAdd Sal, to main gradient wells\n=============================================================="));
    if (plate_number <= first_tmp_plate)
    {
      if (is_pipetting == "true")
      {
        GSF_IMS_SHARED_SUBMETHODS::tip_pickup(ML_STAR.Tips_300_Channels, 4, ML_STAR);
        GSF_IMS_SHARED_SUBMETHODS::add_reagent_reuse_tips(ML_STAR.Sal_stock_1_4, ML_STAR.regular_wells_with_sal_1, sal_volume, 1, 0, ML_STAR.Tips_300_Channels, 4, ML_STAR);
        GSF_IMS_SHARED_SUBMETHODS::add_reagent_reuse_tips(ML_STAR.Sal_stock_1_4, ML_STAR.grad_start_wells_with_sal_1, grad_start_sal_volume, 0, 0, ML_STAR.Tips_300_Channels, 4, ML_STAR);
        GSF_IMS_SHARED_SUBMETHODS::tip_eject(4, ML_STAR);
        GSF_IMS_SHARED_SUBMETHODS::tip_pickup(ML_STAR.Tips_300_Channels, 4, ML_STAR);
        GSF_IMS_SHARED_SUBMETHODS::add_reagent_reuse_tips(ML_STAR.Sal_stock_2_4, ML_STAR.regular_wells_with_sal_2, sal_volume, 1, 0, ML_STAR.Tips_300_Channels, 4, ML_STAR);
        GSF_IMS_SHARED_SUBMETHODS::add_reagent_reuse_tips(ML_STAR.Sal_stock_2_4, ML_STAR.grad_start_wells_with_sal_2, grad_start_sal_volume, 0, 0, ML_STAR.Tips_300_Channels, 4, ML_STAR);
        GSF_IMS_SHARED_SUBMETHODS::tip_eject(4, ML_STAR);
      }
      else
      {
        if (is_debugging == "true")
        {
          dialogHandle_3.SetOutput(Translate("media into growth plate"), "\n", Translate("media into Abgene plate"), "\n");
          dialogHandle_3.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        }
      }
    }
    MECC::TraceComment(Translate("==============================================================\nAdd TMP\n=============================================================="));
    if (with_tmp == 1)
    {
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(ML_STAR.TMP_stock, ML_STAR.regular_wells_with_tmp, tmp_volume, 0, 0, ML_STAR.Tips_300_Channels, 8, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(ML_STAR.TMP_stock, ML_STAR.grad_start_wells_with_tmp, grad_start_tmp_volume, 0, 0, ML_STAR.Tips_300_Channels, 8, ML_STAR);
      SeqResetSequenceIndexes(ML_STAR.regular_wells_with_tmp);
    }
    MECC::TraceComment(Translate("==============================================================\nAdd Van to grad_start wells\n=============================================================="));
    if (is_pipetting == "true")
    {
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(ML_STAR.Van_stock_1, ML_STAR.grad_start_wells_with_tmp, grad_start_van_volume, 0, 0, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(ML_STAR.Van_stock_1_4, ML_STAR.grad_start_wells_no_tmp, grad_start_van_volume_no_tmp, 0, 0, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_2.SetOutput(Translate("media into growth plate"), "\n", Translate("media into Abgene plate"), "\n");
        dialogHandle_2.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    GSF_IMS_SHARED_SUBMETHODS::pipette_dil_series(ML_STAR.van_gradient_pipette_from, ML_STAR.van_gradient_pipette_to, dil_series_transf_vol, 2, dil_series_transf_vol, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
    GSF_IMS_SHARED_SUBMETHODS::pipette_dil_series(ML_STAR.van_gradient_no_tmp_from, ML_STAR.van_gradient_no_tmp_to, dil_series_transf_vol_no_tmp, 2, dil_series_transf_vol_no_tmp, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CalculateOutputs();
    SaveWorklistAndMetadata();
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_ExitLibrary();
  } }
