private function CalculateOutputs(  ) void ;
private function CleanUp(  ) void ;
private function GetParams(  ) void ;
private function SaveWorklistAndMetadata(  ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function CleanUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        TipCount::Write2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        TipCount::Write2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        TipCount::Write2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 4)
      {
        TipCount::Write2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR, ML_STAR.clear_96_head_seq);
}

private function StartUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  TIP_HANDLING_WITH_96_HEAD::GetTipCounters(tip_counter_array, 1);
  tip_seq_arr.SetSize(0);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_300_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_50_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Offset_pickup);
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 4)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
}

private function CalculateOutputs(  ) void {
  private variable prop_arr[];
  private variable int_seq_len;
  private variable sal_conc;
  private variable labware_id;
  private variable loopCounter1;
  private variable loopCounter3;
  private variable well_id;
  private variable van_conc;
  private variable sal_1_conc;
  private variable sal_2_conc;
  MECC::TraceComment(Translate("**** CalculateOutputs sub-method ****"));
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "inducer_1_conc", 0);
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "inducer_1_id", inducer_1_id);
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "inducer_1_units", inducer_1_units);
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "inducer_2_conc", 0);
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "inducer_2_id", inducer_2_id);
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "inducer_2_units", inducer_2_units);
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "additive_conc", 0);
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "additive_id", additive_1_id);
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "additive_units", additive_1_units);
  int_seq_len = SeqGetTotal(ML_STAR.calc_wells_with_tmp);
  prop_arr.SetSize(0);
  if (with_tmp == 1)
  {
    SeqSetPropertyRange(ML_STAR.calc_wells_with_tmp, 1, int_seq_len, Translate("additive_id"), additive_1_id);
    prop_arr.AddAsLast(Translate("additive_id"));
    SeqSetPropertyRange(ML_STAR.calc_wells_with_tmp, 1, int_seq_len, Translate("additive_conc"), tmp_conc);
    prop_arr.AddAsLast(Translate("additive_conc"));
    SeqSetPropertyRange(ML_STAR.calc_wells_with_tmp, 1, int_seq_len, Translate("additive_units"), additive_1_units);
    prop_arr.AddAsLast(Translate("additive_units"));
  }
  SeqSetPropertyRange(ML_STAR.calc_wells_with_tmp, 1, int_seq_len, Translate("inducer_2_id"), inducer_2_id);
  prop_arr.AddAsLast(Translate("inducer_2_id"));
  SeqSetPropertyRange(ML_STAR.calc_wells_with_tmp, 1, int_seq_len, Translate("inducer_2_units"), inducer_2_units);
  prop_arr.AddAsLast(Translate("inducer_2_units"));
  LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.calc_wells_with_tmp, prop_arr, ML_STAR.Growth_Plate);
  sal_conc=sal_stock_conc_arr.GetAt(1-1);
  sal_conc = sal_conc / (sal_tmp_stock_dilution * 1.0);
  int_seq_len = SeqGetTotal(ML_STAR.calc_wells_with_sal_1);
  SeqSetPropertyRange(ML_STAR.calc_wells_with_sal_1, 1, int_seq_len, Translate("inducer_2_conc"), sal_conc);
  prop_arr.SetSize(0);
  prop_arr.AddAsLast(Translate("inducer_2_conc"));
  LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.calc_wells_with_sal_1, prop_arr, ML_STAR.Growth_Plate);
  sal_conc=sal_stock_conc_arr.GetAt(2-1);
  sal_conc = sal_conc / (sal_tmp_stock_dilution * 1.0);
  int_seq_len = SeqGetTotal(ML_STAR.calc_wells_with_sal_2);
  SeqSetPropertyRange(ML_STAR.calc_wells_with_sal_2, 1, int_seq_len, Translate("inducer_2_conc"), sal_conc);
  prop_arr.SetSize(0);
  prop_arr.AddAsLast(Translate("inducer_2_conc"));
  LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.calc_wells_with_sal_2, prop_arr, ML_STAR.Growth_Plate);
  labware_id = SeqGetLabwareId(ML_STAR.Growth_Plate);
  van_conc = inducer_1_stock_concentration / (van_stock_dilution * 1.0);
  {
    loopCounter1 = 0;
    ML_STAR.regular_wells_no_tmp_with_van.SetCurrentPosition(1);
    while (
       (ML_STAR.regular_wells_no_tmp_with_van.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.regular_wells_no_tmp_with_van, 1);
      loopCounter1 = loopCounter1 + 1;
      well_id = SeqGetPositionId(ML_STAR.regular_wells_no_tmp_with_van);
      LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, Translate("inducer_1_conc"), van_conc);
      SeqIncrement(ML_STAR.regular_wells_no_tmp_with_van, 1);
      if (
         (ML_STAR.regular_wells_no_tmp_with_van.GetCurrentPosition() > 0 && ML_STAR.regular_wells_no_tmp_with_van.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.regular_wells_no_tmp_with_van.SetMax(ML_STAR.regular_wells_no_tmp_with_van.GetTotal());
    ML_STAR.regular_wells_no_tmp_with_van.SetCurrentPosition(1);
  }
  {
    loopCounter1 = 0;
    ML_STAR.van_gradient_calc.SetCurrentPosition(1);
    while (
       (ML_STAR.van_gradient_calc.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.van_gradient_calc, 1);
      loopCounter1 = loopCounter1 + 1;
      {
        for(loopCounter3 = 0; loopCounter3 < 8;)
        {
          loopCounter3 = loopCounter3 + 1;
          well_id = SeqGetPositionId(ML_STAR.van_gradient_calc);
          LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, Translate("inducer_1_conc"), van_conc);
          SeqIncrement(ML_STAR.van_gradient_calc, 1);
        }
      }
      van_conc = van_conc / (dil_series_factor * 1.0);
      if (
         (ML_STAR.van_gradient_calc.GetCurrentPosition() > 0 && ML_STAR.van_gradient_calc.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.van_gradient_calc.SetMax(ML_STAR.van_gradient_calc.GetTotal());
    ML_STAR.van_gradient_calc.SetCurrentPosition(1);
  }
  labware_id = SeqGetLabwareId(ML_STAR.Growth_Plate);
  sal_1_conc = sal_stock_conc_arr.ElementAt( 1 -1) / (sal_1_grad_start_dilution * 1.0);
  sal_2_conc = sal_stock_conc_arr.ElementAt( 2 -1) / (sal_2_grad_start_dilution * 1.0);
  {
    loopCounter1 = 0;
    ML_STAR.sal_gradient_calc.SetCurrentPosition(1);
    while (
       (ML_STAR.sal_gradient_calc.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.sal_gradient_calc, 1);
      loopCounter1 = loopCounter1 + 1;
      {
        for(loopCounter3 = 0; loopCounter3 < 4;)
        {
          loopCounter3 = loopCounter3 + 1;
          well_id = SeqGetPositionId(ML_STAR.sal_gradient_calc);
          LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, Translate("inducer_2_conc"), sal_1_conc);
          SeqIncrement(ML_STAR.sal_gradient_calc, 1);
          well_id = SeqGetPositionId(ML_STAR.sal_gradient_calc);
          LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, Translate("inducer_2_conc"), sal_2_conc);
          SeqIncrement(ML_STAR.sal_gradient_calc, 1);
        }
      }
      sal_1_conc = sal_1_conc / (dil_series_factor * 1.0);
      sal_2_conc = sal_2_conc / (dil_series_factor * 1.0);
      if (
         (ML_STAR.sal_gradient_calc.GetCurrentPosition() > 0 && ML_STAR.sal_gradient_calc.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.sal_gradient_calc.SetMax(ML_STAR.sal_gradient_calc.GetTotal());
    ML_STAR.sal_gradient_calc.SetCurrentPosition(1);
  }
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, Translate("strain"), strain_1_id);
  if (plasmid_4_id == "ignore")
  {
    SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, Translate("plasmid"), plasmid_1_id);
  }
  else
  {
    SeqSetPropertyRange(ML_STAR.plasmid_1, 1, 24, Translate("plasmid"), plasmid_1_id);
    SeqSetPropertyRange(ML_STAR.plasmid_2, 1, 24, Translate("plasmid"), plasmid_2_id);
    SeqSetPropertyRange(ML_STAR.plasmid_3, 1, 24, Translate("plasmid"), plasmid_3_id);
    SeqSetPropertyRange(ML_STAR.plasmid_4, 1, 24, Translate("plasmid"), plasmid_4_id);
    prop_arr.SetSize(0);
    prop_arr.AddAsLast(Translate("plasmid"));
    LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.plasmid_1, prop_arr, ML_STAR.Growth_Plate);
    LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.plasmid_2, prop_arr, ML_STAR.Growth_Plate);
    LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.plasmid_3, prop_arr, ML_STAR.Growth_Plate);
    LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.plasmid_4, prop_arr, ML_STAR.Growth_Plate);
  }
}

private function SaveWorklistAndMetadata(  ) void {
  private variable row_id;
  private variable well_id;
  private variable plasmid;
  private variable strain;
  private variable position;
  private variable column_id;
  private variable column_id_str;
  private file file1;
  private variable iniFilePath;
  private variable iniDir;
  private variable iniExists;
  private variable loopCounter2;
  private variable inducer_2_conc;
  private variable inducer_1_conc;
  private variable additive_1_conc;
  MECC::TraceComment(Translate("**** SaveWorklist sub-method ****"));
  file1.AddField("position", position, hslInteger);
  file1.AddField("well", well_id, hslString, 255);
  file1.AddField("row", row_id, hslString, 255);
  file1.AddField("column", column_id, hslInteger);
  file1.AddField("inducer1Id", inducer_1_id, hslString, 255);
  file1.AddField("inducer1Concentration", inducer_1_conc, hslFloat);
  file1.AddField("inducer1Units", inducer_1_units, hslString, 255);
  file1.AddField("inducer2Id", inducer_2_id, hslString, 255);
  file1.AddField("inducer2Concentration", inducer_2_conc, hslFloat);
  file1.AddField("inducer2Units", inducer_2_units, hslString, 255);
  file1.AddField("selectorId", additive_1_id, hslString, 255);
  file1.AddField("selectorConc", additive_1_conc, hslString, 255);
  file1.AddField("selectorUnits", additive_1_units, hslString, 255);
  file1.AddField("strain", strain, hslString, 255);
  file1.AddField("plasmid", plasmid, hslString, 255);
  file1.SetDelimiter(hslCSVDelimited);
  if( 0 == file1.Open(worklist_file_path, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, worklist_file_path, "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    ML_STAR.Growth_Plate.SetCurrentPosition(1);
    while (
       (ML_STAR.Growth_Plate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.Growth_Plate, 1);
      loopCounter2 = loopCounter2 + 1;
      position = ML_STAR.Growth_Plate.GetCurrentPosition();
      well_id = SeqGetPositionId(ML_STAR.Growth_Plate);
      row_id = StrLeft(well_id, 1);
      column_id_str = StrMid(well_id, 1, 2);
      column_id = StrIVal(column_id_str);
      inducer_1_conc = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("inducer_1_conc"));
      inducer_2_conc = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("inducer_2_conc"));
      additive_1_conc = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("additive_conc"));
      strain = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("strain"));
      plasmid = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("plasmid"));
      if( 0 == file1.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      SeqIncrement(ML_STAR.Growth_Plate, 1);
      if (
         (ML_STAR.Growth_Plate.GetCurrentPosition() > 0 && ML_STAR.Growth_Plate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.Growth_Plate.SetMax(ML_STAR.Growth_Plate.GetTotal());
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  iniDir = HSLExtensions::File::GetDirectoryName(worklist_file_path);
  iniFilePath = iniDir + "\\schema.ini";
  iniExists = HSLExtensions::File::Exists(iniFilePath);
  if (iniExists == 1)
  {
    HSLExtensions::File::Delete(iniFilePath);
  }
}

private function GetParams(  ) void {
  private variable param_dict;
  private variable loc;
  private variable read_line;
  private file file1;
  private variable split_line[];
  private variable inducer_conc_str;
  private variable loopCounter2;
  private variable culture_volume_str;
  private variable dilution_factor_str;
  private variable plate_num_str;
  private variable add_conc_str;
  private variable dilution_series_str;
  private variable sal_counter;
  private variable sal_key;
  private variable sal_conc;
  private variable key_exists;
  private variable sal_conc_str;
  private variable sal_1_grad_max_conc;
  private variable sal_2_grad_max_conc;
  param_dict = "param_dict";
  HSLExtensions::Dictionary::CreateDictionary(param_dict, 2);
  file1.AddField(1, read_line, hslString);
  file1.SetDelimiter(hslAsciiText);
  if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    while (
       (file1.Eof() == 0)
    )
    {
      loopCounter2 = loopCounter2 + 1;
      if( 0 == file1.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      loc = StrFind(read_line, ",");
      if (loc > 0)
      {
        split_line = HSLExtensions::String::Split(read_line, Translate(","), 1);
        HSLExtensions::Dictionary::AddItem(param_dict, split_line.ElementAt( 1 -1), split_line.ElementAt( 2 -1));
      }
    }
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  worklist_file_path = HSLExtensions::Dictionary::GetItem(param_dict, Translate("worklistFile"));
  strain_1_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("strain1"));
  plasmid_1_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("plasmid1"));
  plasmid_2_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("plasmid2"));
  plasmid_3_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("plasmid3"));
  plasmid_4_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("plasmid4"));
  inducer_1_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer1"));
  inducer_1_units = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer1StockUnits"));
  inducer_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer1StockConc"));
  inducer_1_stock_concentration = StrFVal(inducer_conc_str);
  inducer_2_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer2"));
  inducer_2_units = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer2StockUnits"));
  sal_stock_conc_arr.SetSize(0);
  {
    for(sal_counter = 0; sal_counter < 2;)
    {
      sal_counter = sal_counter + 1;
      sal_key = StrConcat2(Translate("inducer2_"), sal_counter);
      sal_key = StrConcat2(sal_key, Translate("StockConc"));
      inducer_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, sal_key);
      sal_conc = StrFVal(inducer_conc_str);
      sal_stock_conc_arr.AddAsLast(sal_conc);
    }
  }
  additive_1_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("selector1"));
  add_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("selector1StockConc"));
  additive_1_stock_concentration = StrFVal(add_conc_str);
  additive_1_units = HSLExtensions::Dictionary::GetItem(param_dict, Translate("selector1StockUnits"));
  is_pipetting = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isPipetting"));
  is_debugging = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isDebugging"));
  culture_volume_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("cultureVolume"));
  culture_volume = StrFVal(culture_volume_str);
  if (culture_volume > 500)
  {
    culture_volume = 500;
  }
  else
  {
    if (culture_volume < 200)
    {
      culture_volume = 200;
    }
  }
  dilution_factor_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("dilutionFactor"));
  dilution_factor = StrFVal(dilution_factor_str);
  plate_num_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("plateNum"));
  plate_number = StrIVal(plate_num_str);
  dilution_factor_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("van_stock_dilution"));
  van_stock_dilution = StrFVal(dilution_factor_str);
  dilution_factor_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("sal_tmp_stock_dilution"));
  sal_tmp_stock_dilution = StrFVal(dilution_factor_str);
  tmp_conc = additive_1_stock_concentration / (sal_tmp_stock_dilution * 1.0);
  dilution_series_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("dilutionSeriesFactor"));
  dil_series_factor = StrFVal(dilution_series_str);
  key_exists = HSLExtensions::Dictionary::ExistsItem(param_dict, "inducer2_1_grad_max_conc");
  if (key_exists == 1)
  {
    sal_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer2_1_grad_max_conc"));
    sal_1_grad_max_conc = StrFVal(sal_conc_str);
    sal_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer2_2_grad_max_conc"));
    sal_2_grad_max_conc = StrFVal(sal_conc_str);
  }
  else
  {
    sal_1_grad_max_conc = 35;
    sal_2_grad_max_conc = 50;
  }
  sal_1_grad_start_dilution = sal_stock_conc_arr.ElementAt( 1 -1) / (sal_1_grad_max_conc * 1.0);
  sal_2_grad_start_dilution = sal_stock_conc_arr.ElementAt( 2 -1) / (sal_2_grad_max_conc * 1.0);
}
