private function CalculateOutputs(  ) void ;
private function CleanUp(  ) void ;
private function GetParams(  ) void ;
private function SaveWorklistAndMetadata(  ) void ;
private function StartUp(  ) void ;
private function pipette_dil_series( sequence & from_seq, sequence & to_seq, variable p_vol, variable m_vol, variable number_channels ) void ;
private function pipette_inducer( sequence & tip_seq, sequence & asp_seq, sequence & disp_seq, variable p_vol ) void ;
private function pipette_media( sequence & disp_seq, variable p_vol, variable pre_wet_tips ) void ;
private function pipette_selector( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable pre_wet_tips, sequence & pre_wet_1, sequence & pre_wet_2 ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function CleanUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        TipCount::Write2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        TipCount::Write2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        TipCount::Write2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 4)
      {
        TipCount::Write2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR, ML_STAR.clear_96_head_seq);
}

private function StartUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  TIP_HANDLING_WITH_96_HEAD::GetTipCounters(tip_counter_array, 1);
  tip_seq_arr.SetSize(0);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_300_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_50_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Offset_pickup);
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 4)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
}

private function CalculateOutputs(  ) void {
  private variable prop_arr[];
  private variable int_seq_len;
  private variable flt_conc;
  private sequence inducer_2_seq_arr[];
  private variable loopCounter5;
  private variable inducer_2_conc_arr[];
  private sequence plasmid_seq_arr[];
  private variable plas_num;
  MECC::TraceComment(Translate("**** Start CalculateOutputs sub-method ****"));
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "inducer_1_conc", 0);
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "inducer_1_id", "none");
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "inducer_1_units", "N/A");
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "inducer_2_conc", 0);
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "inducer_2_id", "none");
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "inducer_2_units", "N/A");
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "additive_conc", 0);
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "additive_id", "none");
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "additive_units", "N/A");
  int_seq_len = SeqGetTotal(ML_STAR.add_tmp);
  SeqSetPropertyRange(ML_STAR.add_tmp, 1, int_seq_len, Translate("additive_id"), additive_1_id);
  prop_arr.SetSize(0);
  prop_arr.AddAsLast(Translate("additive_id"));
  flt_conc = additive_1_stock_concentration / (10 * 1.0);
  SeqSetPropertyRange(ML_STAR.add_tmp, 1, int_seq_len, Translate("additive_conc"), flt_conc);
  prop_arr.AddAsLast(Translate("additive_conc"));
  SeqSetPropertyRange(ML_STAR.add_tmp, 1, int_seq_len, Translate("additive_units"), additive_1_units);
  prop_arr.AddAsLast(Translate("additive_units"));
  LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.add_tmp, prop_arr, ML_STAR.Growth_Plate);
  int_seq_len = SeqGetTotal(ML_STAR.add_sal);
  flt_conc = inducer_1_stock_concentration / (10 * 1.0);
  SeqSetPropertyRange(ML_STAR.add_sal, 1, int_seq_len, Translate("inducer_1_conc"), flt_conc);
  prop_arr.SetSize(0);
  prop_arr.AddAsLast(Translate("inducer_1_conc"));
  LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.add_sal, prop_arr, ML_STAR.Growth_Plate);
  inducer_2_seq_arr.SetSize(0);
  inducer_2_conc_arr.SetSize(0);
  inducer_2_seq_arr.AddAsLast(ML_STAR.add_van_1);
  flt_conc = inducer_2_1_stock_concentration / (10 * 1.0);
  inducer_2_conc_arr.AddAsLast(flt_conc);
  TrcTrace(Translate("inducer_2_1_stock_concentration: "), inducer_2_1_stock_concentration);
  inducer_2_seq_arr.AddAsLast(ML_STAR.add_van_2);
  flt_conc = inducer_2_2_stock_concentration / (10 * 1.0);
  inducer_2_conc_arr.AddAsLast(flt_conc);
  TrcTrace(Translate("inducer_2_2_stock_concentration: "), inducer_2_2_stock_concentration);
  inducer_2_seq_arr.AddAsLast(ML_STAR.add_van_3);
  flt_conc = inducer_2_3_stock_concentration / (10 * 1.0);
  inducer_2_conc_arr.AddAsLast(flt_conc);
  TrcTrace(Translate("inducer_2_3_stock_concentration: "), inducer_2_3_stock_concentration);
  inducer_2_seq_arr.AddAsLast(ML_STAR.add_van_4);
  flt_conc = inducer_2_4_stock_concentration / (10 * 1.0);
  inducer_2_conc_arr.AddAsLast(flt_conc);
  TrcTrace(Translate("inducer_2_4_stock_concentration: "), inducer_2_4_stock_concentration);
  prop_arr.SetSize(0);
  prop_arr.AddAsLast(Translate("inducer_2_conc"));
  {
    for(loopCounter5 = 0; loopCounter5 < 4;)
    {
      loopCounter5 = loopCounter5 + 1;
      flt_conc=inducer_2_conc_arr.GetAt(loopCounter5-1);
      int_seq_len = SeqGetTotal(inducer_2_seq_arr.ElementAt( loopCounter5 -1));
      SeqSetPropertyRange(inducer_2_seq_arr.ElementAt( loopCounter5 -1), 1, int_seq_len, Translate("inducer_2_conc"), flt_conc);
      LMSF_UTILITIES::SeqCopyPropsFromShortSeq(inducer_2_seq_arr.ElementAt( loopCounter5 -1), prop_arr, ML_STAR.Growth_Plate);
    }
  }
  plasmid_seq_arr.SetSize(0);
  plasmid_seq_arr.AddAsLast(ML_STAR.plasmid_01);
  plasmid_seq_arr.AddAsLast(ML_STAR.plasmid_02);
  plasmid_seq_arr.AddAsLast(ML_STAR.plasmid_03);
  plasmid_seq_arr.AddAsLast(ML_STAR.plasmid_04);
  plasmid_seq_arr.AddAsLast(ML_STAR.plasmid_05);
  plasmid_seq_arr.AddAsLast(ML_STAR.plasmid_06);
  plasmid_seq_arr.AddAsLast(ML_STAR.plasmid_07);
  plasmid_seq_arr.AddAsLast(ML_STAR.plasmid_08);
  plasmid_seq_arr.AddAsLast(ML_STAR.plasmid_09);
  plasmid_seq_arr.AddAsLast(ML_STAR.plasmid_10);
  plasmid_seq_arr.AddAsLast(ML_STAR.plasmid_11);
  plasmid_seq_arr.AddAsLast(ML_STAR.plasmid_12);
  plasmid_seq_arr.AddAsLast(ML_STAR.plasmid_13);
  plasmid_seq_arr.AddAsLast(ML_STAR.plasmid_14);
  plasmid_seq_arr.AddAsLast(ML_STAR.plasmid_15);
  plasmid_seq_arr.AddAsLast(ML_STAR.plasmid_16);
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, Translate("strain"), strain_1_id);
  prop_arr.SetSize(0);
  prop_arr.AddAsLast(Translate("plasmid"));
  {
    for(plas_num = 0; plas_num < 16;)
    {
      plas_num = plas_num + 1;
      SeqSetPropertyRange(plasmid_seq_arr.ElementAt( plas_num -1), 1, 6, Translate("plasmid"), plasmid_id_arr.ElementAt( plas_num -1));
      LMSF_UTILITIES::SeqCopyPropsFromShortSeq(plasmid_seq_arr.ElementAt( plas_num -1), prop_arr, ML_STAR.Growth_Plate);
    }
  }
  MECC::TraceComment(Translate("**** Completed CalculateOutputs sub-method ****"));
}

private function SaveWorklistAndMetadata(  ) void {
  private variable row_id;
  private variable well_id;
  private variable plasmid;
  private variable strain;
  private variable position;
  private variable column_id;
  private variable column_id_str;
  private file file1;
  private variable iniFilePath;
  private variable iniDir;
  private variable iniExists;
  private variable loopCounter2;
  private variable inducer_2_conc;
  private variable inducer_1_conc;
  private variable additive_1_conc;
  MECC::TraceComment(Translate("**** Start SaveWorklist sub-method ****"));
  file1.AddField("position", position, hslInteger);
  file1.AddField("well", well_id, hslString, 255);
  file1.AddField("row", row_id, hslString, 255);
  file1.AddField("column", column_id, hslInteger);
  file1.AddField("inducer1Id", inducer_1_id, hslString, 255);
  file1.AddField("inducer1Concentration", inducer_1_conc, hslFloat);
  file1.AddField("inducer1Units", inducer_1_units, hslString, 255);
  file1.AddField("inducer2Id", inducer_2_id, hslString, 255);
  file1.AddField("inducer2Concentration", inducer_2_conc, hslFloat);
  file1.AddField("inducer2Units", inducer_2_units, hslString, 255);
  file1.AddField("selectorId", additive_1_id, hslString, 255);
  file1.AddField("selectorConc", additive_1_conc, hslString, 255);
  file1.AddField("selectorUnits", additive_1_units, hslString, 255);
  file1.AddField("strain", strain, hslString, 255);
  file1.AddField("plasmid", plasmid, hslString, 255);
  file1.SetDelimiter(hslCSVDelimited);
  if( 0 == file1.Open(worklist_file_path, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, worklist_file_path, "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    ML_STAR.Growth_Plate.SetCurrentPosition(1);
    while (
       (ML_STAR.Growth_Plate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.Growth_Plate, 1);
      loopCounter2 = loopCounter2 + 1;
      position = ML_STAR.Growth_Plate.GetCurrentPosition();
      well_id = SeqGetPositionId(ML_STAR.Growth_Plate);
      row_id = StrLeft(well_id, 1);
      column_id_str = StrMid(well_id, 1, 2);
      column_id = StrIVal(column_id_str);
      inducer_1_conc = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("inducer_1_conc"));
      inducer_2_conc = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("inducer_2_conc"));
      additive_1_conc = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("additive_conc"));
      strain = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("strain"));
      plasmid = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("plasmid"));
      if( 0 == file1.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      SeqIncrement(ML_STAR.Growth_Plate, 1);
      if (
         (ML_STAR.Growth_Plate.GetCurrentPosition() > 0 && ML_STAR.Growth_Plate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.Growth_Plate.SetMax(ML_STAR.Growth_Plate.GetTotal());
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  iniDir = HSLExtensions::File::GetDirectoryName(worklist_file_path);
  iniFilePath = iniDir + "\\schema.ini";
  iniExists = HSLExtensions::File::Exists(iniFilePath);
  if (iniExists == 1)
  {
    HSLExtensions::File::Delete(iniFilePath);
  }
  MECC::TraceComment(Translate("**** Completed SaveWorklist sub-method ****"));
}

private function GetParams(  ) void {
  private variable param_dict;
  private variable loc;
  private variable read_line;
  private file file1;
  private variable split_line[];
  private variable inducer_conc_str;
  private variable loopCounter2;
  private variable culture_volume_str;
  private variable dilution_factor_str;
  private variable plate_num_str;
  private variable add_conc_str;
  private variable plas_num;
  private variable plasmid_key;
  private variable plasmid_id;
  param_dict = "param_dict";
  HSLExtensions::Dictionary::CreateDictionary(param_dict, 2);
  file1.AddField(1, read_line, hslString);
  file1.SetDelimiter(hslAsciiText);
  if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    while (
       (file1.Eof() == 0)
    )
    {
      loopCounter2 = loopCounter2 + 1;
      if( 0 == file1.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      loc = StrFind(read_line, ",");
      if (loc > 0)
      {
        split_line = HSLExtensions::String::Split(read_line, Translate(","), 1);
        HSLExtensions::Dictionary::AddItem(param_dict, split_line.ElementAt( 1 -1), split_line.ElementAt( 2 -1));
      }
    }
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  worklist_file_path = HSLExtensions::Dictionary::GetItem(param_dict, Translate("worklistFile"));
  strain_1_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("strain1"));
  plasmid_id_arr.SetSize(0);
  {
    for(plas_num = 0; plas_num < 16;)
    {
      plas_num = plas_num + 1;
      plasmid_key = StrConcat2(Translate("plasmid"), plas_num);
      plasmid_id = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), plasmid_key);
      plasmid_id_arr.AddAsLast(plasmid_id);
    }
  }
  inducer_1_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer1"));
  inducer_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer1StockConc"));
  inducer_1_stock_concentration = StrFVal(inducer_conc_str);
  inducer_1_units = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer1StockUnits"));
  inducer_2_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer2"));
  inducer_2_units = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer2StockUnits"));
  inducer_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer2_1StockConc"));
  inducer_2_1_stock_concentration = StrFVal(inducer_conc_str);
  inducer_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer2_2StockConc"));
  inducer_2_2_stock_concentration = StrFVal(inducer_conc_str);
  inducer_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer2_3StockConc"));
  inducer_2_3_stock_concentration = StrFVal(inducer_conc_str);
  inducer_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer2_4StockConc"));
  inducer_2_4_stock_concentration = StrFVal(inducer_conc_str);
  additive_1_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("selector1"));
  add_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("selector1StockConc"));
  additive_1_stock_concentration = StrFVal(add_conc_str);
  additive_1_units = HSLExtensions::Dictionary::GetItem(param_dict, Translate("selector1StockUnits"));
  is_pipetting = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isPipetting"));
  is_debugging = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isDebugging"));
  culture_volume_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("cultureVolume"));
  culture_volume = StrFVal(culture_volume_str);
  if (culture_volume > 500)
  {
    culture_volume = 500;
  }
  else
  {
    if (culture_volume < 200)
    {
      culture_volume = 200;
    }
  }
  dilution_factor_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("dilutionFactor"));
  dilution_factor = StrFVal(dilution_factor_str);
  plate_num_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("gradPlateNum"));
  sequence_number = StrIVal(plate_num_str);
  plate_num_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("plateNum"));
  plate_number = StrIVal(plate_num_str);
}

private function pipette_media( sequence & disp_seq, variable p_vol, variable pre_wet_tips ) void {
  GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from, disp_seq, p_vol, pre_wet_tips, ML_STAR.media_pre_wet_1, ML_STAR.media_pre_wet_2, ML_STAR, ML_STAR.Tips_1000_Channels);
}

private function pipette_inducer( sequence & tip_seq, sequence & asp_seq, sequence & disp_seq, variable p_vol ) void {
  TrcTrace(Translate("pipetting inducer volume: "), p_vol);
  GSF_IMS_SHARED_SUBMETHODS::pipette_inducer(asp_seq, disp_seq, p_vol, ML_STAR, tip_seq);
}

private function pipette_dil_series( sequence & from_seq, sequence & to_seq, variable p_vol, variable m_vol, variable number_channels ) void {
  GSF_IMS_SHARED_SUBMETHODS::pipette_dil_series(from_seq, to_seq, p_vol, m_vol, number_channels, ML_STAR, ML_STAR.Tips_1000_Channels);
}

private function pipette_selector( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable pre_wet_tips, sequence & pre_wet_1, sequence & pre_wet_2 ) void {
  TrcTrace(Translate("pipetting selector volume: "), p_vol);
  GSF_IMS_SHARED_SUBMETHODS::pipette_selector(asp_seq, disp_seq, p_vol, pre_wet_tips, pre_wet_1, pre_wet_2, ML_STAR, ML_STAR.Tips_300_Channels);
}
