 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
 namespace _Method { #include "GSF-IMS Project\\GSF-IMS.shared_submethods.hs_" }
 namespace _Method { #include "HSLExtensions\\Sequence.hsl" }
#include "Fitness Selection.PDZ binding.res"
variable worklist_file_path;
variable strain_1_id;
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable culture_volume;
variable is_debugging;
dialog dialogHandle_1;
variable dilution_factor;
variable cell_volume;
variable sequence_number;
variable inducer_2_id;
variable inducer_1_id;
variable inducer_1_units;
variable inducer_2_units;
variable inducer_1_stock_concentration;
variable inducer_ref_volume;
variable additive_1_units;
variable additive_1_stock_concentration;
variable additive_1_id;
variable first_tmp_seq;
variable tmp_ref_volume;
variable with_tmp;
variable inducer_2_2_stock_concentration;
variable inducer_2_1_stock_concentration;
global device ML_STAR ("Fitness Selection.PDZ binding.lay", "ML_STAR", hslTrue);
sequence add_van_arr[];
sequence van_stock_arr[];
variable van_num;
variable add_inducer_volume;
variable media_volume;
variable add_tmp_volume;
variable media_vol_w_tmp;
variable media_vol_w_tmp_inducer;
variable media_vol_w_tmp_2xinducer;
dialog dialogHandle_2;
dialog dialogHandle_3;
variable plasmid_id_arr[];
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("==============================================================\n\n=============================================================="));
    GetParams();
    StartUp();
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_source_lid, ML_STAR.Lid_parking_Media_trough, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    cell_volume = culture_volume / (dilution_factor * 1.0);
    media_volume = culture_volume - cell_volume;
    first_tmp_seq = 2;
    if (sequence_number < first_tmp_seq)
    {
      inducer_ref_volume = culture_volume;
      tmp_ref_volume = culture_volume;
      with_tmp = 0;
    }
    else
    {
      with_tmp = 1;
      if (sequence_number == first_tmp_seq)
      {
        inducer_ref_volume = media_volume;
        tmp_ref_volume = culture_volume;
      }
      else
      {
        if (sequence_number > first_tmp_seq)
        {
          inducer_ref_volume = media_volume;
          tmp_ref_volume = media_volume;
        }
      }
    }
    add_inducer_volume = inducer_ref_volume / (10 * 1.0);
    if (with_tmp == 1)
    {
      add_tmp_volume = tmp_ref_volume / (10 * 1.0);
    }
    else
    {
      add_tmp_volume = 0;
    }
    media_vol_w_tmp = media_volume - add_tmp_volume;
    media_vol_w_tmp_inducer = media_vol_w_tmp - add_inducer_volume;
    media_vol_w_tmp_2xinducer = media_vol_w_tmp_inducer - add_inducer_volume;
    TrcTrace(Translate("dilution_factor: "), dilution_factor);
    TrcTrace(Translate("cell_volume: "), cell_volume);
    TrcTrace(Translate("media_volume: "), media_volume);
    TrcTrace(Translate("add_inducer_volume: "), add_inducer_volume);
    TrcTrace(Translate("with_tmp: "), with_tmp);
    TrcTrace(Translate("add_tmp_volume: "), add_tmp_volume);
    TrcTrace(Translate("sequence_number: "), sequence_number);
    MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate and gradient starter plate\n=============================================================="));
    if (is_pipetting == "true")
    {
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", 0);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
      PTL::SetTipHandlingState("TipCountingIdentifier", "");
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupChannelVariable", "");
      PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
      if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_1000_Channels) )
      {
            PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
      pipette_media(ML_STAR.media_w_nothing, media_volume, 1);
      pipette_media(ML_STAR.media_w_tmp, media_vol_w_tmp, 2);
      pipette_media(ML_STAR.media_w_tmp_sal, media_vol_w_tmp_inducer, 2);
      pipette_media(ML_STAR.media_w_tmp_van, media_vol_w_tmp_inducer, 2);
      pipette_media(ML_STAR.media_w_tmp_sal_van, media_vol_w_tmp_2xinducer, 2);
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectChannelVariable", "");
      if( 0 == PTL::TipEject(ML_STAR) )
      {
            PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
      ML_STAR.Media_pipette_from.SetCurrentPosition(1);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_1.SetOutput(Translate("media into growth plate"), "\n", Translate("media into Abgene plate"), "\n");
        dialogHandle_1.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Media_trough, ML_STAR.Media_source_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    if (is_pipetting == "true")
    {
      if (with_tmp == 1)
      {
        PTL::ResetTipHandlingState();
        PTL::SetTipHandlingState("UserResponseTime", 0);
        PTL::SetTipHandlingState("ErrorHandling", 3);
        PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
        PTL::SetTipHandlingState("TipCountingIdentifier", "");
        PTL::SetTipHandlingState("InitializeCustomStepID", 0);
        PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
        PTL::SetTipHandlingState("TipPickupChannelVariable", "");
        PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
        if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_300_Channels) )
        {
              PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
        pipette_selector(ML_STAR.TMP_10x_stock, ML_STAR.add_tmp, add_tmp_volume, 1, ML_STAR.TMP_prewet_1, ML_STAR.TMP_prewet_2);
        PTL::ResetTipHandlingState();
        PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
        PTL::SetTipHandlingState("ErrorHandling", 3);
        PTL::SetTipHandlingState("InitializeCustomStepID", 0);
        PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
        PTL::SetTipHandlingState("TipEjectChannelVariable", "");
        if( 0 == PTL::TipEject(ML_STAR) )
        {
              PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
    }
    else
    {
    }
    MECC::TraceComment(Translate("==============================================================\nDilute inducer 1 (e.g. Sal) stock into grad_start wells\n=============================================================="));
    if (is_pipetting == "true")
    {
      if (with_tmp == 1)
      {
        pipette_inducer(ML_STAR.Tips_300_Channels, ML_STAR.Sal_stock, ML_STAR.add_sal, add_inducer_volume);
      }
      else
      {
        PTL::ResetTipHandlingState();
        PTL::SetTipHandlingState("UserResponseTime", 0);
        PTL::SetTipHandlingState("ErrorHandling", 3);
        PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
        PTL::SetTipHandlingState("TipCountingIdentifier", "");
        PTL::SetTipHandlingState("InitializeCustomStepID", 0);
        PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
        PTL::SetTipHandlingState("TipPickupChannelVariable", "");
        PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
        if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_300_Channels) )
        {
              PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
        pipette_selector(ML_STAR.Sal_stock, ML_STAR.add_sal, add_inducer_volume, 1, ML_STAR.Sal_prewet_1, ML_STAR.Sal_prewet_2);
        PTL::ResetTipHandlingState();
        PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
        PTL::SetTipHandlingState("ErrorHandling", 3);
        PTL::SetTipHandlingState("InitializeCustomStepID", 0);
        PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
        PTL::SetTipHandlingState("TipEjectChannelVariable", "");
        if( 0 == PTL::TipEject(ML_STAR) )
        {
              PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_2.SetOutput(Translate("Reagent stock plate to Growth plate"), "\n");
        dialogHandle_2.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    MECC::TraceComment(Translate("==============================================================\nDilute second inducer (e.g. Van) stock into appropirate wells\n=============================================================="));
    if (is_pipetting == "true")
    {
      MECC::TraceComment(Translate("****  pipette Van inducer to wells with Van"));
      add_van_arr.SetSize(0);
      add_van_arr.AddAsLast(ML_STAR.add_van_1);
      add_van_arr.AddAsLast(ML_STAR.add_van_2);
      van_stock_arr.SetSize(0);
      van_stock_arr.AddAsLast(ML_STAR.Van_stock_1);
      van_stock_arr.AddAsLast(ML_STAR.Van_stock_2);
      {
        for(van_num = 0; van_num < 2;)
        {
          van_num = van_num + 1;
          pipette_inducer(ML_STAR.Tips_300_Channels, van_stock_arr.ElementAt( van_num -1), add_van_arr.ElementAt( van_num -1), add_inducer_volume);
        }
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_3.SetOutput(Translate("Reagent stock plate to Growth plate"), "\n");
        dialogHandle_3.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    MECC::TraceComment(Translate("***************************************************\nReplace lid onto Reagent stock plate and Growth plate, then move Growth plate to handoff\n***************************************************"));
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CalculateOutputs();
    SaveWorklistAndMetadata();
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_ExitLibrary();
  } }
