 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "Hamilton HeaterCooler\\HamiltonHeaterCooler.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Directory.hsl" }
 namespace _Method { #include "HSLTimLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
#include "Fitness Selection 2.With DNA Extraction.res"
sequence tip_seq_arr[];
variable tip_counter_array[];
variable set_temperature;
variable preheat_time;
timer timer1;
variable _blnSimulationMode;
variable HHC_1;
global device ML_STAR ("Fitness Selection 2.With DNA Extraction.lay", "ML_STAR", hslTrue);
variable HHC_SN_arr[];
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    GetParams();
    StartUp();
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.Move_Growth_Plate_preheat, ML_STAR.Growth_Plate_preheating_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
    if( 0 == timer1.SetTimer(preheat_time) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == timer1.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    PLATEANDLIDMOVEMENT::MoveGrowthPlateFromThermoShake(ML_STAR.Move_Growth_Plate_preheat, ML_STAR.Growth_Plate_preheating_lid, ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
  } }
