 namespace _Method { #include "Hamilton HeaterCooler STAR\\HamiltonHeaterCoolerStar.hsl" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "Hamilton HeaterCooler\\HamiltonHeaterCooler.hsl" }
 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "Common\\MPE_Library.hs_" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
#include "Fitness Selection 2.With DNA Extraction.res"
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
variable HHC_1;
variable HHS_1;
variable HHC_SN_arr[];
variable hhc_ret;
variable set_temp;
variable min_temp;
variable max_temp;
global device ML_STAR ("Fitness Selection 2.With DNA Extraction.lay", "ML_STAR", hslTrue);
variable HHS_2;
variable _blnSimulationMode;
dialog customDialog_1;
dialog customDialog_2;
dialog customDialog_3;
dialog customDialog_4;
dialog customDialog_5;
dialog customDialog_6;
dialog customDialog_7;
variable actual_temperature;
dialog customDialog_8;
dialog customDialog_9;
dialog customDialog_10;
dialog customDialog_11;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    MPE_LIBRARY::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    _blnSimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    TrcTrace("_blnSimulationMode: ", _blnSimulationMode);
    StartUp();
    set_temp = 3.0;
    min_temp = set_temp - 3;
    max_temp = set_temp + 3;
    if (_blnSimulationMode != 1)
    {
      hhc_ret = HamiltonHeaterCooler::SetTemperature(HHC_SN_arr.ElementAt( 3 -1), min_temp, max_temp, set_temp, HamiltonHeaterCooler::_FALSE, 30);
    }
    set_temp = 60.0;
    min_temp = set_temp - 3;
    max_temp = set_temp + 3;
    if (_blnSimulationMode != 1)
    {
      hhc_ret = HamiltonHeaterCooler::SetTemperature(HHC_SN_arr.ElementAt( 2 -1), min_temp, max_temp, set_temp, HamiltonHeaterCooler::_FALSE, 30);
    }
    customDialog_5.InitCustomDialog("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");
    customDialog_5.ShowCustomDialog();
    if (_blnSimulationMode != 1)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS_1, 0);
    }
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    if (_blnSimulationMode != 1)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS_1, 1);
    }
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    if (_blnSimulationMode != 1)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS_2, 0);
    }
    customDialog_3.InitCustomDialog("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");
    customDialog_3.ShowCustomDialog();
    if (_blnSimulationMode != 1)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS_2, 1);
    }
    customDialog_4.InitCustomDialog("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");
    customDialog_4.ShowCustomDialog();
    customDialog_6.InitCustomDialog("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");
    customDialog_6.ShowCustomDialog();
    customDialog_7.InitCustomDialog("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");
    customDialog_7.ShowCustomDialog();
    customDialog_8.InitCustomDialog("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");
    customDialog_8.ShowCustomDialog();
    customDialog_9.InitCustomDialog("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");
    customDialog_9.ShowCustomDialog();
    customDialog_10.InitCustomDialog("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");
    customDialog_10.ShowCustomDialog();
    customDialog_11.InitCustomDialog("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");
    customDialog_11.ShowCustomDialog();
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Numc_BP, ML_STAR.Nunc_BP_storage_1_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
    actual_temperature = -1;
    HamiltonHeaterCooler::GetTemperature(HHC_SN_arr.ElementAt( 2 -1), actual_temperature);
    HamiltonHeaterCooler::GetTemperature(HHC_SN_arr.ElementAt( 3 -1), actual_temperature);
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    MPE_LIBRARY::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
  } }
