 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
 namespace _Method { #include "GSF-IMS Project\\GSF-IMS.shared_submethods.hs_" }
 namespace _Method { #include "HSLExtensions\\Sequence.hsl" }
#include "Fitness Selection.Six media test.res"
variable plasmid_1_id;
variable worklist_file_path;
variable strain_1_id;
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable culture_volume;
variable is_debugging;
dialog dialogHandle_1;
variable dilution_factor;
variable media_volume;
variable cell_volume;
variable plasmid_2_id;
variable plasmid_4_id;
variable plasmid_3_id;
variable plate_number;
global device ML_STAR ("Fitness Selection.Six media test.lay", "ML_STAR", hslTrue);
sequence media_from_arr[];
sequence media_to_arr[];
variable media_counter;
sequence asp_seq;
sequence disp_seq;
dialog dialogHandle_2;
variable media_id_arr[];
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("==============================================================\nThis method used for preparing plates 2-5\n=============================================================="));
    GetParams();
    StartUp();
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_Stock_Plate_lid, ML_STAR.Lid_parking_media_stock, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    cell_volume = culture_volume / (dilution_factor * 1.0);
    media_volume = culture_volume - cell_volume;
    TrcTrace(Translate("dilution_factor: "), dilution_factor);
    TrcTrace(Translate("cell_volume: "), cell_volume);
    TrcTrace(Translate("media_volume: "), media_volume);
    TrcTrace(Translate("plate_number: "), plate_number);
    media_from_arr.SetSize(0);
    media_from_arr.AddAsLast(ML_STAR.media_stock_1);
    media_from_arr.AddAsLast(ML_STAR.media_stock_2);
    media_from_arr.AddAsLast(ML_STAR.media_stock_3);
    media_from_arr.AddAsLast(ML_STAR.media_stock_4);
    media_from_arr.AddAsLast(ML_STAR.media_stock_5);
    media_from_arr.AddAsLast(ML_STAR.media_stock_6);
    media_to_arr.SetSize(0);
    media_to_arr.AddAsLast(ML_STAR.media_dispense_1);
    media_to_arr.AddAsLast(ML_STAR.media_dispense_2);
    media_to_arr.AddAsLast(ML_STAR.media_dispense_3);
    media_to_arr.AddAsLast(ML_STAR.media_dispense_4);
    media_to_arr.AddAsLast(ML_STAR.media_dispense_5);
    media_to_arr.AddAsLast(ML_STAR.media_dispense_6);
    MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate\n=============================================================="));
    if (is_pipetting == "true")
    {
      {
        for(media_counter = 0; media_counter < 6;)
        {
          media_counter = media_counter + 1;
          asp_seq=media_from_arr.GetAt(media_counter-1);
          disp_seq=media_to_arr.GetAt(media_counter-1);
          GSF_IMS_SHARED_SUBMETHODS::tip_pickup(ML_STAR.Tips_1000_Channels, 4, ML_STAR);
          GSF_IMS_SHARED_SUBMETHODS::pipette_media(asp_seq, disp_seq, media_volume, 1, ML_STAR.Tips_1000_Channels, 4, ML_STAR);
          GSF_IMS_SHARED_SUBMETHODS::tip_eject(4, ML_STAR);
          SeqResetSequenceIndexes(disp_seq);
        }
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_1.SetOutput(Translate("media into growth plate"), "\n", Translate("media into Abgene plate"), "\n");
        dialogHandle_1.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    if (plate_number == 1)
    {
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_media_stock, ML_STAR.Media_Stock_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
    }
    else
    {
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_media_stock, ML_STAR.Media_Stock_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    }
    if (plate_number == 1)
    {
      MECC::TraceComment(Translate("==============================================================\nPipette cells into growth plate.\n=============================================================="));
      if (is_pipetting == "true")
      {
        cell_volume = culture_volume * 0.1;
        GSF_IMS_SHARED_SUBMETHODS::pipette_cells_from_tubes(ML_STAR.Bacteria_Stock_4strains, ML_STAR.Bacteria_dispense, cell_volume, 2, 800, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
      }
      else
      {
        if (is_debugging == "true")
        {
          dialogHandle_2.SetOutput(Translate("cells into growth plate"), "\n");
          dialogHandle_2.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        }
      }
    }
    if (plate_number == 1)
    {
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
      PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Lid_parking_Old_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    }
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CalculateOutputs();
    SaveWorklistAndMetadata();
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_ExitLibrary();
  } }
