private function CalculateOutputs(  ) void ;
private function CleanUp(  ) void ;
private function GetParams(  ) void ;
private function SaveWorklistAndMetadata(  ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function CleanUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        TipCount::Write2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        TipCount::Write2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        TipCount::Write2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 4)
      {
        TipCount::Write2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR, ML_STAR.clear_96_head_seq);
}

private function StartUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  TIP_HANDLING_WITH_96_HEAD::GetTipCounters(tip_counter_array, 1);
  tip_seq_arr.SetSize(0);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_300_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_50_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Offset_pickup);
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 4)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
}

private function CalculateOutputs(  ) void {
  private variable prop_arr[];
  private variable media_id;
  MECC::TraceComment(Translate("**** CalculateOutputs sub-method ****"));
  prop_arr.SetSize(0);
  prop_arr.AddAsLast(Translate("media"));
  {
    for(media_counter = 0; media_counter < 6;)
    {
      media_counter = media_counter + 1;
      disp_seq=media_to_arr.GetAt(media_counter-1);
      media_id=media_id_arr.GetAt(media_counter-1);
      SeqSetPropertyRange(disp_seq, 1, 16, Translate("media"), media_id);
      LMSF_UTILITIES::SeqCopyPropsFromShortSeq(disp_seq, prop_arr, ML_STAR.Growth_Plate);
    }
  }
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, Translate("strain"), strain_1_id);
  if (plasmid_4_id == "ignore")
  {
    SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, Translate("plasmid"), plasmid_1_id);
  }
  else
  {
    SeqSetPropertyRange(ML_STAR.plasmid_1, 1, 24, Translate("plasmid"), plasmid_1_id);
    SeqSetPropertyRange(ML_STAR.plasmid_2, 1, 24, Translate("plasmid"), plasmid_2_id);
    SeqSetPropertyRange(ML_STAR.plasmid_3, 1, 24, Translate("plasmid"), plasmid_3_id);
    SeqSetPropertyRange(ML_STAR.plasmid_4, 1, 24, Translate("plasmid"), plasmid_4_id);
    prop_arr.SetSize(0);
    prop_arr.AddAsLast(Translate("plasmid"));
    LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.plasmid_1, prop_arr, ML_STAR.Growth_Plate);
    LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.plasmid_2, prop_arr, ML_STAR.Growth_Plate);
    LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.plasmid_3, prop_arr, ML_STAR.Growth_Plate);
    LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.plasmid_4, prop_arr, ML_STAR.Growth_Plate);
  }
}

private function SaveWorklistAndMetadata(  ) void {
  private variable row_id;
  private variable well_id;
  private variable plasmid;
  private variable strain;
  private variable position;
  private variable column_id;
  private variable column_id_str;
  private file file1;
  private variable iniFilePath;
  private variable iniDir;
  private variable iniExists;
  private variable loopCounter2;
  private variable media_id;
  MECC::TraceComment(Translate("**** SaveWorklist sub-method ****"));
  file1.AddField("position", position, hslInteger);
  file1.AddField("well", well_id, hslString, 255);
  file1.AddField("row", row_id, hslString, 255);
  file1.AddField("column", column_id, hslInteger);
  file1.AddField("media", media_id, hslString, 255);
  file1.AddField("strain", strain, hslString, 255);
  file1.AddField("plasmid", plasmid, hslString, 255);
  file1.SetDelimiter(hslCSVDelimited);
  if( 0 == file1.Open(worklist_file_path, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, worklist_file_path, "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    ML_STAR.Growth_Plate.SetCurrentPosition(1);
    while (
       (ML_STAR.Growth_Plate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.Growth_Plate, 1);
      loopCounter2 = loopCounter2 + 1;
      position = ML_STAR.Growth_Plate.GetCurrentPosition();
      well_id = SeqGetPositionId(ML_STAR.Growth_Plate);
      row_id = StrLeft(well_id, 1);
      column_id_str = StrMid(well_id, 1, 2);
      column_id = StrIVal(column_id_str);
      media_id = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("media"));
      strain = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("strain"));
      plasmid = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("plasmid"));
      if( 0 == file1.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      SeqIncrement(ML_STAR.Growth_Plate, 1);
      if (
         (ML_STAR.Growth_Plate.GetCurrentPosition() > 0 && ML_STAR.Growth_Plate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.Growth_Plate.SetMax(ML_STAR.Growth_Plate.GetTotal());
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  iniDir = HSLExtensions::File::GetDirectoryName(worklist_file_path);
  iniFilePath = iniDir + "\\schema.ini";
  iniExists = HSLExtensions::File::Exists(iniFilePath);
  if (iniExists == 1)
  {
    HSLExtensions::File::Delete(iniFilePath);
  }
}

private function GetParams(  ) void {
  private variable param_dict;
  private variable loc;
  private variable read_line;
  private file file1;
  private variable split_line[];
  private variable loopCounter2;
  private variable culture_volume_str;
  private variable dilution_factor_str;
  private variable plate_num_str;
  private variable media_id;
  private variable media_key;
  param_dict = "param_dict";
  HSLExtensions::Dictionary::CreateDictionary(param_dict, 2);
  file1.AddField(1, read_line, hslString);
  file1.SetDelimiter(hslAsciiText);
  if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    while (
       (file1.Eof() == 0)
    )
    {
      loopCounter2 = loopCounter2 + 1;
      if( 0 == file1.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      loc = StrFind(read_line, ",");
      if (loc > 0)
      {
        split_line = HSLExtensions::String::Split(read_line, Translate(","), 1);
        HSLExtensions::Dictionary::AddItem(param_dict, split_line.ElementAt( 1 -1), split_line.ElementAt( 2 -1));
      }
    }
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  worklist_file_path = HSLExtensions::Dictionary::GetItem(param_dict, Translate("worklistFile"));
  strain_1_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("strain1"));
  plasmid_1_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("plasmid1"));
  plasmid_2_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("plasmid2"));
  plasmid_3_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("plasmid3"));
  plasmid_4_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("plasmid4"));
  is_pipetting = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isPipetting"));
  is_debugging = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isDebugging"));
  culture_volume_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("cultureVolume"));
  culture_volume = StrFVal(culture_volume_str);
  if (culture_volume > 500)
  {
    culture_volume = 500;
  }
  else
  {
    if (culture_volume < 200)
    {
      culture_volume = 200;
    }
  }
  dilution_factor_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("dilutionFactor"));
  dilution_factor = StrFVal(dilution_factor_str);
  plate_num_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("plateNum"));
  plate_number = StrIVal(plate_num_str);
  media_id_arr.SetSize(0);
  {
    for(media_counter = 0; media_counter < 6;)
    {
      media_counter = media_counter + 1;
      media_key = StrConcat2(Translate("media_"), media_counter);
      media_id = HSLExtensions::Dictionary::GetItem(param_dict, media_key);
      media_id_arr.AddAsLast(media_id);
    }
  }
}
