 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
 namespace _Method { #include "GSF-IMS Project\\GSF-IMS.shared_submethods.hs_" }
 namespace _Method { #include "HSLExtensions\\Sequence.hsl" }
#include "Fitness Selection.Align-T7RNAP.1.res"
variable worklist_file_path;
variable strain_1_id;
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable culture_volume;
variable is_debugging;
dialog dialogHandle_1;
variable dilution_factor;
variable media_volume;
variable cell_volume;
variable plate_number;
variable additive_1_units;
variable additive_1_stock_concentration;
variable additive_1_id;
variable tmp_ref_volume;
variable with_tmp;
dialog dialogHandle_2;
variable tmp_conc;
variable first_tmp_plate;
variable tmp_volume;
variable p_vol;
dialog dialogHandle_3;
variable plasmid_id_arr[];
global device ML_STAR ("Fitness Selection.Align-T7RNAP.1.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("==============================================================\nThis method used for preparing plates 2-5\n=============================================================="));
    GetParams();
    StartUp();
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_source_lid, ML_STAR.Lid_parking_Media_trough, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    cell_volume = culture_volume / (dilution_factor * 1.0);
    media_volume = culture_volume - cell_volume;
    first_tmp_plate = 3;
    if (plate_number < first_tmp_plate)
    {
      tmp_ref_volume = culture_volume;
      with_tmp = 0;
    }
    else
    {
      with_tmp = 1;
      if (plate_number == first_tmp_plate)
      {
        tmp_ref_volume = culture_volume;
      }
      else
      {
        if (plate_number > first_tmp_plate)
        {
          tmp_ref_volume = media_volume;
        }
      }
    }
    if (with_tmp == 1)
    {
      tmp_volume = tmp_ref_volume / (10 * 1.0);
    }
    else
    {
      tmp_volume = 0;
    }
    TrcTrace(Translate("dilution_factor: "), dilution_factor);
    TrcTrace(Translate("cell_volume: "), cell_volume);
    TrcTrace(Translate("media_volume: "), media_volume);
    TrcTrace(Translate("with_tmp: "), with_tmp);
    TrcTrace(Translate("tmp_volume: "), tmp_volume);
    TrcTrace(Translate("plate_number: "), plate_number);
    MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate\n=============================================================="));
    if (is_pipetting == "true")
    {
      GSF_IMS_SHARED_SUBMETHODS::tip_pickup(ML_STAR.Tips_1000_Channels, 4, ML_STAR);
      p_vol = media_volume;
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from, ML_STAR.media_no_tmp, p_vol, 1, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
      p_vol = p_vol - tmp_volume;
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from, ML_STAR.media_with_tmp, p_vol, 0, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::tip_eject(4, ML_STAR);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_1.SetOutput(Translate("media into growth plate"), "\n", Translate("media into Abgene plate"), "\n");
        dialogHandle_1.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Media_trough, ML_STAR.Media_source_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nAdd TMP\n=============================================================="));
    if (with_tmp == 1)
    {
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_reuse_tips(ML_STAR.Selector_10x_stock, ML_STAR.Selector_dispense, tmp_volume, 1, 1, ML_STAR.Tips_300_Channels, 8, ML_STAR);
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CalculateOutputs();
    SaveWorklistAndMetadata();
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_ExitLibrary();
  } }
