 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" } 
 namespace _Method { #include "HSLTipCountingLib.hsl" } 
 namespace _Method { #include "HSLSeqLib.hsl" } 
 namespace _Method { #include "HSLStrLib.hsl" } 
 namespace _Method { #include "HSLTrcLib.hsl" } 
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" } 
 namespace _Method { #include "HSLExtensions\\String.hsl" } 
 namespace _Method { #include "HSLExtensions\\File.hsl" } 
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" } 
 namespace _Method { #include "HSLExtensions\\Directory.hsl" } 
 namespace _Method { #include "HSLTimLib.hsl" } 
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" } 
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" } 
#include "Fitness Selection 2.With DNA Extraction.res"
/* {{ 2 "LibraryInsertLine" "" */ // }} ""
sequence tip_seq_arr[];
variable tip_counter_array[];
variable culture_volume;
variable pipette_volume;
global device ML_STAR ("Fitness Selection 2.With DNA Extraction.lay", "ML_STAR", hslTrue);
dialog dialogHandle1;
/* {{ 2 "VariableInsertLine" "" */ // }} ""
// {{ 2 "TemplateIncludeBlock" ""
 namespace _Method { #include "HSLMETEDLib.hs_" } 
 namespace _Method { #include "HSLMECCLib.hs_" } 
 namespace _Method { #include "HSLPTLLib.hsl" } 
// }} ""
// {{{ 2 "LocalSubmethodInclude" ""
 namespace _Method {  #include __filename__ ".sub"  } 
// }} ""
/* {{ 2 "ProcessInsertLine" "" */ // }} ""
// {{{ 5 "main" "Begin"
namespace _Method { method main(  ) void {
// }} ""
// {{ 5 "main" "InitLocals"
// }} ""
// {{ 2 "AutoInitBlock" ""
PTL::SetWashingStateDefault("RinseTime1", 5);
PTL::SetWashingStateDefault("SoakTime1", 5);
PTL::SetWashingStateDefault("FlowRate1", 11);
PTL::SetWashingStateDefault("RinseTime2", 0);
PTL::SetWashingStateDefault("SoakTime2", 0);
PTL::SetWashingStateDefault("FlowRate2", 11);
PTL::SetWashingStateDefault("DrainingTime", 10);
PTL::SetWashingStateDefault("StartWashLiquid", 0);
PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
COMMON96HEADSUBMETHODS::_InitLibrary();
TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
LMSF_UTILITIES::_InitLibrary();
PLATEANDLIDMOVEMENT::_InitLibrary();
::RegisterAbortHandler( "OnAbort");
// }} ""
// {{ 1 1 0 "da5c5db6_4cc7_43e1_88d545441a5e9f6c" "{F07B0071-8EFC-11d4-A3BA-002035848439}"
MECC::TraceComment(Translate("==========================================================================================\nThis method used for preparing a test plate with media/water\n\nIt uses 8 1000 uL tips\n=========================================================================================="));
// }} ""
// {{ 2 1 0 "e881ebb4_fedc_4858_ae3b0d020f4d8f33" "{B31F3539-5D80-11d4-A5EB-0050DA737D89}"
dialogHandle1.SetInputSize(1);
dialogHandle1.SetInputField(0, Translate("enter media/water volume per well"), hslFloat, 450);
dialogHandle1.ShowInput(Translate("Volume per well?"), hslInfinite, hslOKOnly | hslDefButton1);
culture_volume = dialogHandle1.GetInputField(0);
// }} ""
// {{{ 3 1 0 "65492f06_28ca_4957_8a7421bef78e3006" "{7C4EF7A7-39BE-406a-897F-71F3A35B4093}"
StartUp();
// }} ""
// {{ 4 1 0 "8c5ed28e_d6cc_40f0_b5f603848beaff6a" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{{ 5 1 0 "32c89628_da34_46b0_96e0489d25e3f856" "{7C4EF7A7-39BE-406a-897F-71F3A35B4093}"
PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
// }} ""
// {{{ 6 1 0 "9b14e2e7_bfeb_48a5_af15b47f57035a94" "{7C4EF7A7-39BE-406a-897F-71F3A35B4093}"
PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_source_lid, ML_STAR.Lid_parking_Media_trough, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
// }} ""
// {{ 7 1 0 "8c5ed28e_d6cc_40f0_b5f603848beaff6a" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{ 8 1 0 "6cb5501c_995e_4ad3_8362d561739d3ed0" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{ 9 1 0 "042fea7b_b011_4531_9a0da7dab056cfff" "{F07B0071-8EFC-11d4-A3BA-002035848439}"
MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate.\n=============================================================="));
// }} ""
// {{ 10 1 0 "f7e816b0_2fb7_4cee_b11c5b83dc2d06c4" "{B31F3543-5D80-11d4-A5EB-0050DA737D89}"
pipette_volume = culture_volume;
// }} ""
// {{ 11 1 0 "2f4bd0b7_c506_42c4_b03a80e9c39f02f7" "{B558D25C-EB8A-4a43-8878-125E1847965C}"
{
sequence arrseqAspirate_4441AC2EFBED4f1184E9EA9BE59E650C[];
sequence arrseqDispense_4441AC2EFBED4f1184E9EA9BE59E650C[];
arrseqAspirate_4441AC2EFBED4f1184E9EA9BE59E650C.SetSize(1);
arrseqAspirate_4441AC2EFBED4f1184E9EA9BE59E650C.SetAt(0, ML_STAR.Media_source);
arrseqDispense_4441AC2EFBED4f1184E9EA9BE59E650C.SetSize(1);
arrseqDispense_4441AC2EFBED4f1184E9EA9BE59E650C.SetAt(0, ML_STAR.Media_dispense);
PTL::ResetPipettingStateAndSequences("");
PTL::SetPipettingState("UserResponseTime", hslInfinite);
PTL::SetPipettingState("ErrorHandling", 5);
PTL::SetPipettingState("TipCountingEnabled", hslFalse);
PTL::SetPipettingState("TipCountingIdentifier", "");
PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
PTL::SetPipettingState("CalibrateCarrierChannel", -1);
PTL::SetPipettingState("InitializeCustomStepID", 0);
PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
PTL::SetPipettingState("TipPickupCustomStepID", 11);
PTL::SetPipettingState("TipEjectCustomStepID", 0);
PTL::SetPipettingState("AspirateCustomStepID", 0);
PTL::SetPipettingState("DispenseCustomStepID", 0);
PTL::SetPipettingState("PreDispenseCustomStepID", 0);
PTL::SetPipettingState("PostDispenseCustomStepID", 0);
PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
PTL::SetPipettingState("InitializeChannelVariable", "");
PTL::SetPipettingState("InitializeEnabled", hslTrue);
PTL::SetPipettingState("TipPickupChannelVariable", "");
PTL::SetPipettingState("TipPickupEnabled", hslTrue);
PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
PTL::SetPipettingState("TipEjectChannelVariable", "");
PTL::SetPipettingState("AspirateMode", 0);
PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
PTL::SetPipettingState("AspirateFluidHeight", 0);
PTL::SetPipettingState("AspirateSubmergeDepth", 2);
PTL::SetPipettingState("AspirateChannelVariable", "");
PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
PTL::SetPipettingState("DispenseSubmergeDepth", 0);
PTL::SetPipettingState("DispenseChannelVariable", "");
PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
PTL::SetPipettingState("DispenseFluidHeight", 6);
PTL::SetPipettingState("DispenseMode", 1);
PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_4441AC2EFBED4f1184E9EA9BE59E650C, arrseqDispense_4441AC2EFBED4f1184E9EA9BE59E650C, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, ML_STAR.Media_dispense) )
{
    PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
}
}

// }} ""
// {{ 12 1 0 "6cb5501c_995e_4ad3_8362d561739d3ed0" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{ 13 1 0 "838c972b_65dd_4cc2_9f21d416c40d7f90" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{{ 14 1 0 "e588fd94_8b6d_4537_841ea68f131ff8ea" "{7C4EF7A7-39BE-406a-897F-71F3A35B4093}"
PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Media_trough, ML_STAR.Media_source_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
// }} ""
// {{{ 15 1 0 "94be0fd6_787a_401f_b1b744e48f742842" "{7C4EF7A7-39BE-406a-897F-71F3A35B4093}"
PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
// }} ""
// {{ 16 1 0 "838c972b_65dd_4cc2_9f21d416c40d7f90" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{{ 17 1 0 "0d6e5c5e_f5d8_4d67_85f0d3dcafb7bb67" "{7C4EF7A7-39BE-406a-897F-71F3A35B4093}"
CleanUp();
// }} ""
// {{ 2 "AutoExitBlock" ""
COMMON96HEADSUBMETHODS::_ExitLibrary();
TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
LMSF_UTILITIES::_ExitLibrary();
PLATEANDLIDMOVEMENT::_ExitLibrary();
// }} ""
// {{{ 5 "main" "End"
} }
// }} ""
// $$author=djross$$valid=0$$time=2022-11-07 09:24$$checksum=1055d734$$length=085$$