// {{{ 2 "SubmethodForwardDeclaration" ""
private function CleanUp(  ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;
// }} ""
// {{{ 5 "OnAbort" "Begin"
function OnAbort(  ) void {
// }} ""
// {{ 5 "OnAbort" "InitLocals"
// }} ""
// {{{ 67 1 0 "f4db07e0_7034_4b88_89aa915539211cbb" "{7C4EF7A7-39BE-406a-897F-71F3A35B4093}"
CleanUp();
// }} ""
// {{{ 5 "OnAbort" "End"
}
// }} ""
// {{{ 5 "CleanUp" "Begin"
private function CleanUp(  ) void {
// }} ""
private variable array_length;
private variable loopCounter1;
// {{ 5 "CleanUp" "InitLocals"
// }} ""
// {{ 21 1 0 "f24b71bf_4089_4602_8a9f22f3881fd48f" "{72EACF88-8D49-43e3-92C8-2F90E81E3260}"
array_length=tip_counter_array.GetSize();
// }} ""
// {{ 22 1 0 "14f5f1e7_1604_4446_ba5fffd141028125" "{B31F3532-5D80-11d4-A5EB-0050DA737D89}"
{
for(loopCounter1 = 0; loopCounter1 < array_length;)
{
loopCounter1 = loopCounter1 + 1;
// }} ""
// {{ 23 1 0 "7da00c19_c9a4_424f_8dd53c78ad845499" "{B31F3531-5D80-11d4-A5EB-0050DA737D89}"
if (loopCounter1 == 1)
{
// }} ""
// {{{ 24 1 0 "5b7982e2_7df2_43aa_b72d02b80bad5c82" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
TipCount::Write2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
// }} ""
// {{ 25 1 0 "7da00c19_c9a4_424f_8dd53c78ad845499" "{B31F3531-5D80-11d4-A5EB-0050DA737D89}"
}
// }} ""
// {{ 26 1 0 "171e9c13_67c2_4719_9fb6706e49ae1bc5" "{B31F3531-5D80-11d4-A5EB-0050DA737D89}"
if (loopCounter1 == 2)
{
// }} ""
// {{{ 27 1 0 "899a529d_af56_4127_9711984a00274bcd" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
TipCount::Write2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
// }} ""
// {{ 28 1 0 "171e9c13_67c2_4719_9fb6706e49ae1bc5" "{B31F3531-5D80-11d4-A5EB-0050DA737D89}"
}
// }} ""
// {{ 29 1 0 "c51333d5_848e_4685_bd63d629576dae3b" "{B31F3531-5D80-11d4-A5EB-0050DA737D89}"
if (loopCounter1 == 3)
{
// }} ""
// {{{ 30 1 0 "e61732e8_eec2_4565_813f4e2f345fd124" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
TipCount::Write2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
// }} ""
// {{ 31 1 0 "c51333d5_848e_4685_bd63d629576dae3b" "{B31F3531-5D80-11d4-A5EB-0050DA737D89}"
}
// }} ""
// {{ 32 1 0 "852b26af_1eee_4ee9_b300ed7e1b92c681" "{B31F3531-5D80-11d4-A5EB-0050DA737D89}"
if (loopCounter1 == 4)
{
// }} ""
// {{{ 33 1 0 "55ab4962_7fad_4662_93e2eb7a6830c1c1" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
TipCount::Write2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
// }} ""
// {{ 34 1 0 "852b26af_1eee_4ee9_b300ed7e1b92c681" "{B31F3531-5D80-11d4-A5EB-0050DA737D89}"
}
// }} ""
// {{ 35 1 0 "14f5f1e7_1604_4446_ba5fffd141028125" "{B31F3532-5D80-11d4-A5EB-0050DA737D89}"
}
}
// }} ""
// {{{ 36 1 0 "dad184c9_8d24_47b2_b4c014783500af44" "{7C4EF7A7-39BE-406a-897F-71F3A35B4093}"
COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR, ML_STAR.clear_96_head_seq);
// }} ""
// {{{ 5 "CleanUp" "End"
}
// }} ""
// {{{ 5 "StartUp" "Begin"
private function StartUp(  ) void {
// }} ""
private variable array_length;
private variable loopCounter1;
// {{ 5 "StartUp" "InitLocals"
// }} ""
// {{{ 38 1 0 "f5e0ce46_089f_4058_9dde19f7ff2f1ec7" "{7C4EF7A7-39BE-406a-897F-71F3A35B4093}"
TIP_HANDLING_WITH_96_HEAD::GetTipCounters(tip_counter_array, 1);
// }} ""
// {{ 39 1 0 "ffb921ef_5505_4788_a474af4da801955f" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{ 40 1 0 "7c78c178_cb65_40b2_aa3eb1bba9ca9497" "{4900C1F7-0FB7-4033-8253-760BDB9354DC}"
tip_seq_arr.SetSize(0);
// }} ""
// {{ 41 1 0 "a4dd251d_32e5_431c_b92a5f7367fc1052" "{F17B7626-27CB-47f1-8477-8C4158339A6D}"
tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Channels);
// }} ""
// {{ 42 1 0 "2b5bb22c_67e4_47b7_afb1981e9cd254bf" "{F17B7626-27CB-47f1-8477-8C4158339A6D}"
tip_seq_arr.AddAsLast(ML_STAR.Tips_300_Channels);
// }} ""
// {{ 43 1 0 "064b76a2_f091_4a63_b99195629667b02c" "{F17B7626-27CB-47f1-8477-8C4158339A6D}"
tip_seq_arr.AddAsLast(ML_STAR.Tips_50_Channels);
// }} ""
// {{ 44 1 0 "bc14ece6_a4dc_4d08_a7839be8db3def9e" "{F17B7626-27CB-47f1-8477-8C4158339A6D}"
tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Offset_pickup);
// }} ""
// {{ 45 1 0 "ffb921ef_5505_4788_a474af4da801955f" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{ 46 1 0 "9227a7e0_38a6_49da_b069a827bf345760" "{72EACF88-8D49-43e3-92C8-2F90E81E3260}"
array_length=tip_counter_array.GetSize();
// }} ""
// {{ 47 1 0 "f18f56a2_560b_4e94_ad0b4bf2c846bc9a" "{B31F3532-5D80-11d4-A5EB-0050DA737D89}"
{
for(loopCounter1 = 0; loopCounter1 < array_length;)
{
loopCounter1 = loopCounter1 + 1;
// }} ""
// {{ 48 1 0 "8eb6fbb9_dcbe_40b4_a0799fd8a4724f72" "{B31F3531-5D80-11d4-A5EB-0050DA737D89}"
if (loopCounter1 == 1)
{
// }} ""
/* {{ 1 "" "0" */ if(0){  /* }} "" */
// {{{ 49 1 0 "1097ff8f_fbaf_40f4_be4da4345bae311e" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
TipCount::Edit2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
// }} ""
/* {{ 1 "" "1" */ } /* }} "" */
// {{{ 50 1 0 "878fe322_8c5b_437a_942d9d5f684df2b1" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
TipCount::Read2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
// }} ""
// {{ 51 1 0 "8eb6fbb9_dcbe_40b4_a0799fd8a4724f72" "{B31F3531-5D80-11d4-A5EB-0050DA737D89}"
}
// }} ""
// {{ 52 1 0 "e513a89e_93b4_4102_a2693cb9c6c77a72" "{B31F3531-5D80-11d4-A5EB-0050DA737D89}"
if (loopCounter1 == 2)
{
// }} ""
/* {{ 1 "" "0" */ if(0){  /* }} "" */
// {{{ 53 1 0 "2f48c45e_494e_44bb_a6095f5dd04bbbe4" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
TipCount::Edit2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
// }} ""
/* {{ 1 "" "1" */ } /* }} "" */
// {{{ 54 1 0 "313af30f_f6c2_4a56_b1ae8e2300dc51e5" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
TipCount::Read2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
// }} ""
// {{ 55 1 0 "e513a89e_93b4_4102_a2693cb9c6c77a72" "{B31F3531-5D80-11d4-A5EB-0050DA737D89}"
}
// }} ""
// {{ 56 1 0 "0a70d51c_c938_400a_af2e506ebe4b1a39" "{B31F3531-5D80-11d4-A5EB-0050DA737D89}"
if (loopCounter1 == 3)
{
// }} ""
/* {{ 1 "" "0" */ if(0){  /* }} "" */
// {{{ 57 1 0 "23e0743e_8d9f_436a_b65e6c0ee2b563d8" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
TipCount::Edit2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
// }} ""
/* {{ 1 "" "1" */ } /* }} "" */
// {{{ 58 1 0 "da229816_2a80_4039_8777887bb97c127e" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
TipCount::Read2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
// }} ""
// {{ 59 1 0 "0a70d51c_c938_400a_af2e506ebe4b1a39" "{B31F3531-5D80-11d4-A5EB-0050DA737D89}"
}
// }} ""
// {{ 60 1 0 "9ff271c2_2fd0_4096_ab88645df0184b12" "{B31F3531-5D80-11d4-A5EB-0050DA737D89}"
if (loopCounter1 == 4)
{
// }} ""
/* {{ 1 "" "0" */ if(0){  /* }} "" */
// {{{ 61 1 0 "c3ab36e7_752f_422e_b3197030a1c6c91b" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
TipCount::Edit2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
// }} ""
/* {{ 1 "" "1" */ } /* }} "" */
// {{{ 62 1 0 "c9b020cb_f45f_48fb_8f460791732ed94d" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
TipCount::Read2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
// }} ""
// {{ 63 1 0 "9ff271c2_2fd0_4096_ab88645df0184b12" "{B31F3531-5D80-11d4-A5EB-0050DA737D89}"
}
// }} ""
// {{ 64 1 0 "f18f56a2_560b_4e94_ad0b4bf2c846bc9a" "{B31F3532-5D80-11d4-A5EB-0050DA737D89}"
}
}
// }} ""
// {{ 65 1 0 "4855942b_ad16_45e7_b53fa4826fddaf30" "ML_STAR:{1C0C0CB0-7C87-11D3-AD83-0004ACB1DCB2}"
{
	variable arrRetValues[];
	arrRetValues = ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("4855942b_ad16_45e7_b53fa4826fddaf30"); // Initialize
}
// }} ""
// {{{ 5 "StartUp" "End"
}
// }} ""
/* {{ 2 "SubmethodInsertLine" "" */ // }} ""
// $$author=Hamilton$$valid=0$$time=2025-06-09 12:57$$checksum=1b00232a$$length=087$$