private function BindingPlate(  ) void ;
private function EP(  ) void ;
private function MoveFPtofromMPE(  ) void ;
private function MoveRPtofromMPE(  ) void ;
private function Step_04_RPPlusFPtoMPE(  ) void ;
private function Step_05_BPtoMPE(  ) void ;
private function Step_08_BPtoEP(  ) void ;
private function init_MPE(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR, ML_STAR.clear_96_head_seq);
}

private function BindingPlate(  ) void {
  ISWAP_PLATEANDLIDMOVEMENT::GetBindPlateFromStorage(ML_STAR.Nunc_BP_storage, ML_STAR.Nunc_BP_MPE2, 0, 0, ML_STAR);
  ISWAP_PLATEANDLIDMOVEMENT::PutBindPlateToStorage(ML_STAR.Nunc_BP_MPE2, ML_STAR.Nunc_BP_storage, 1, 0, ML_STAR);
}

private function MoveRPtofromMPE(  ) void {
  PLATEANDLIDMOVEMENT::MoveEppendorfDWPWithLid(ML_STAR.RP_Storage, ML_STAR.RP_Storage_lid, ML_STAR.RP_on_MPE, ML_STAR.RP_on_MPE_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
  PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.RP_on_MPE_lid, ML_STAR.Lid_parking_RP, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
  PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_RP, ML_STAR.RP_on_MPE_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
  PLATEANDLIDMOVEMENT::MoveEppendorfDWPWithLid(ML_STAR.RP_on_MPE, ML_STAR.RP_on_MPE_lid, ML_STAR.RP_Storage, ML_STAR.RP_Storage_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
}

private function MoveFPtofromMPE(  ) void {
  private variable grip_opening;
  private variable grip_width;
  private variable grip_force;
  private variable grip_height;
  if(0){
    grip_height = 15;
    grip_width = 80;
    grip_opening = 85;
    grip_force = 7;
    ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
  }
  ISWAP_PLATEANDLIDMOVEMENT::GetFilterPlateFromStorage(ML_STAR.FP_Storage, ML_STAR.FP_on_MPE, 0, 0, ML_STAR);
  ISWAP_PLATEANDLIDMOVEMENT::PutFilterPlateToStorage(ML_STAR.FP_on_MPE, ML_STAR.FP_Storage, 1, 0, ML_STAR);
}

private function Step_04_RPPlusFPtoMPE(  ) void {
  private variable FPonRPFilterHeight;
  private variable FPonRPNozzleHeight;
  private dialog dialogHandle1;
  private dialog dialogHandle_1;
  private variable x_shift;
  private variable y_shift;
  private variable z_shift;
  private variable z_unshift;
  private variable x_unshift;
  private variable y_unshift;
  dialogHandle_1.SetOutput(Translate("04"));
  dialogHandle_1.ShowOutput(Translate("next step"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  PLATEANDLIDMOVEMENT::MoveEppendorfDWPWithLid(ML_STAR.RP_Storage, ML_STAR.RP_Storage_lid, ML_STAR.RP_on_MPE, ML_STAR.RP_on_MPE_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
  PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.RP_on_MPE_lid, ML_STAR.Lid_parking_RP, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
  x_shift = 0;
  y_shift = 0.9;
  z_shift = 0;
  LMSF_UTILITIES::SeqXYZShift(ML_STAR.FP_on_MPE, x_shift, y_shift, z_shift, ML_STAR);
  ISWAP_PLATEANDLIDMOVEMENT::GetFilterPlateFromStorage(ML_STAR.FP_Storage, ML_STAR.FP_on_MPE, 1, 0, ML_STAR);
  x_unshift = x_shift * -1;
  y_unshift = y_shift * -1;
  z_unshift = z_shift * -1;
  LMSF_UTILITIES::SeqXYZShift(ML_STAR.FP_on_MPE, x_unshift, y_unshift, z_unshift, ML_STAR);
  dialogHandle1.SetOutput(Translate("pipetting"));
  dialogHandle1.ShowOutput(Translate("pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  FPonRPNozzleHeight = 86.5;
  FPonRPFilterHeight = 86.5;
  MPE_LIBRARY::FilterPlateToWaste(0, FPonRPFilterHeight, FPonRPNozzleHeight, Translate("pressure,20,30;pressure,65,30;"));
  ISWAP_PLATEANDLIDMOVEMENT::PutFilterPlateToStorage(ML_STAR.FP_on_MPE, ML_STAR.FP_Storage, 1, 0, ML_STAR);
  PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_RP, ML_STAR.RP_on_MPE_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
  PLATEANDLIDMOVEMENT::MoveEppendorfDWPWithLid(ML_STAR.RP_on_MPE, ML_STAR.RP_on_MPE_lid, ML_STAR.RP_Storage, ML_STAR.RP_Storage_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
}

private function init_MPE(  ) void {
  private variable MPE2Return;
  private dialog dialogHandle_2;
  private dialog dialogHandle_3;
  MPE_LIBRARY::InitializeMPELibrary(_blnSimulationMode);
  MPE2Return = MPE_LIBRARY::Connect(0);
  if (MPE2Return != 0)
  {
    dialogHandle_3.SetOutput(Translate("Initialize to [MPE]2 (0 if successful): "), MPE2Return);
    dialogHandle_3.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  MPE2Return = MPE_LIBRARY::Initialize(0);
  if (MPE2Return != 0)
  {
    dialogHandle_2.SetOutput(Translate("Initialize to [MPE]2 (0 if successful): "), MPE2Return);
    dialogHandle_2.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
}

private function Step_05_BPtoMPE(  ) void {
  private variable BPFilterHeight;
  private variable BPNozzleHeight;
  private variable BPNozzleOffset;
  private variable BPLenghtofNozzles;
  private dialog dialogHandle_4;
  private dialog dialogHandle_5;
  dialogHandle_5.SetOutput(Translate("05"));
  dialogHandle_5.ShowOutput(Translate("next step"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  ISWAP_PLATEANDLIDMOVEMENT::GetBindPlateFromStorage(ML_STAR.Nunc_BP_storage, ML_STAR.Nunc_BP_MPE2, 1, 0, ML_STAR);
  dialogHandle_4.SetOutput(Translate("pipetting"));
  dialogHandle_4.ShowOutput(Translate("pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  BPNozzleHeight = 38.4;
  BPFilterHeight = 31.35;
  BPLenghtofNozzles = 6.6;
  BPNozzleOffset = 0;
  MPE_LIBRARY::FilterPlateToWaste(0, BPFilterHeight, BPNozzleHeight, Translate("pressure,40,60;"));
}

private function Step_08_BPtoEP(  ) void {
  private variable BPFilterHeight;
  private variable BPNozzleHeight;
  private variable BPNozzleOffset;
  private variable EPlateH;
  private dialog dialogHandle_6;
  private dialog dialogHandle_7;
  dialogHandle_7.SetOutput(Translate("08"));
  dialogHandle_7.ShowOutput(Translate("next step"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  PLATEANDLIDMOVEMENT::MoveEppendorf350uLElutionPlateWithLid(ML_STAR.Eppendorf_EP_Storage, ML_STAR.Eppendorf_EP_Storage_lid, ML_STAR.Eppendorf_EP_Pipetting, ML_STAR.Eppendorf_EP_Pipetting_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
  PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Eppendorf_EP_Pipetting_lid, ML_STAR.Lid_parking_EP_by_MPE, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
  PLATEANDLIDMOVEMENT::MoveBindPlateNoLid(ML_STAR.Nunc_BP_MPE2, ML_STAR.Nunc_BP_on_EP, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
  dialogHandle_6.SetOutput(Translate("pipetting"));
  dialogHandle_6.ShowOutput(Translate("pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  PLATEANDLIDMOVEMENT::MoveBindPlateNoLid(ML_STAR.Nunc_BP_on_EP, ML_STAR.Nunc_BP_MPE2, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
  PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_EP_by_MPE, ML_STAR.Eppendorf_EP_Pipetting_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
  BPNozzleHeight = 38.4;
  BPFilterHeight = 31.35;
  MPE_LIBRARY::SetFilterHeight(BPFilterHeight);
  MPE_LIBRARY::SetNozzleHeight(BPNozzleHeight);
  MPE_LIBRARY::FilterPlatePlaced(0);
  MPE_LIBRARY::ClampFilterPlate(0);
  PLATEANDLIDMOVEMENT::MoveEppendorf350uLElutionPlateWithLid(ML_STAR.Eppendorf_EP_Pipetting, ML_STAR.Eppendorf_EP_Pipetting_lid, ML_STAR.Eppendorf_EP_MPE, ML_STAR.Eppendorf_EP_MPE_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
  PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Eppendorf_EP_MPE_lid, ML_STAR.Lid_parking_EP_by_MPE, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
  BPNozzleOffset = 0;
  EPlateH = 14.35;
  MPE_LIBRARY::SetCollectionPlateHeight(EPlateH);
  MPE_LIBRARY::SetOffsetFromNozzles(BPNozzleOffset);
  MPE_LIBRARY::CollectionPlatePlaced(0);
  MPE_LIBRARY::SetControlPoints(Translate("pressure,65,60;"));
  MPE_LIBRARY::ProcessFilterToCollectionPlate(0, 0);
  PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_EP_by_MPE, ML_STAR.Eppendorf_EP_MPE_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
  PLATEANDLIDMOVEMENT::MoveEppendorf350uLElutionPlateWithLid(ML_STAR.Eppendorf_EP_MPE, ML_STAR.Eppendorf_EP_MPE_lid, ML_STAR.Eppendorf_EP_Storage, ML_STAR.Eppendorf_EP_Storage_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
  MPE_LIBRARY::CollectionPlateRemoved(0);
  MPE_LIBRARY::RetrieveFilterPlate(0);
  ISWAP_PLATEANDLIDMOVEMENT::PutBindPlateToStorage(ML_STAR.Nunc_BP_MPE2, ML_STAR.Nunc_BP_storage, 1, 0, ML_STAR);
}

private function EP(  ) void {
  PLATEANDLIDMOVEMENT::MoveEppendorf350uLElutionPlateWithLid(ML_STAR.Eppendorf_EP_Storage, ML_STAR.Eppendorf_EP_Storage_lid, ML_STAR.Eppendorf_EP_Storage, ML_STAR.Eppendorf_EP_Storage_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
}
