 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
 namespace _Method { #include "GSF-IMS Project\\GSF-IMS.shared_submethods.hs_" }
 namespace _Method { #include "HSLExtensions\\Sequence.hsl" }
#include "Fitness Selection.2 inducers.2 tet.res"
variable plasmid_1_id;
variable worklist_file_path;
variable strain_1_id;
variable strain_str;
variable plasmid_str;
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable culture_volume;
variable pipette_volume;
variable mix_volume;
variable is_debugging;
dialog dialogHandle_1;
dialog dialogHandle_2;
variable dilution_factor;
variable media_volume;
variable cell_volume;
variable grad_start_media_volume;
variable sequence_number;
variable inducer_max_volume;
variable inducer_contr_volume;
variable inducer_contr_media_volume;
dialog dialogHandle_3;
variable dil_series_factor;
variable dil_series_multiplier;
variable dil_series_transf_vol;
variable grad_waste_media_volume;
sequence Inducer_grad_waste_arr[];
variable inducer_2_id;
variable inducer_1_id;
variable inducer_1_units;
variable inducer_2_stock_concentration;
variable inducer_2_units;
variable inducer_1_stock_concentration;
variable inducer_ref_volume;
variable tet_ref_volume;
variable with_tet;
variable grad_start_tet_volume;
variable tet_volume;
variable media_volume_no_tet;
variable media_volume_with_tet;
variable plasmid_2_id;
variable plasmid_4_id;
variable plasmid_3_id;
variable first_tet_seq;
variable plate_number;
dialog dialogHandle_4;
dialog dialogHandle_5;
global device ML_STAR ("Fitness Selection.2 inducers.2 tet.lay", "ML_STAR", hslTrue);
variable additive_2_stock_concentration;
variable additive_1_units;
variable additive_2_units;
variable additive_1_stock_concentration;
variable additive_2_id;
variable additive_1_id;
sequence Inducer_dil_high_to_arr[];
sequence Inducer_dil_low_to_arr[];
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("==============================================================\nThis method used for preparing plate 2, with inducer gradient but no selector\n\nIt uses 16 1000 uL tips and 8 300 uL tips\nand 1.2 mL of inducer stock\n=============================================================="));
    GetParams();
    StartUp();
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.ABGene_plate_0002_lid, ML_STAR.Lid_parking_ABGene_plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_source_lid, ML_STAR.Lid_parking_Media_trough, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    Inducer_grad_waste_arr.SetSize(0);
    Inducer_grad_waste_arr.AddAsLast(ML_STAR.inducer_grad_waste_1);
    Inducer_grad_waste_arr.AddAsLast(ML_STAR.inducer_grad_waste_2);
    Inducer_grad_waste_arr.AddAsLast(ML_STAR.inducer_grad_waste_3);
    Inducer_grad_waste_arr.AddAsLast(ML_STAR.inducer_grad_waste_4);
    Inducer_grad_waste_arr.AddAsLast(ML_STAR.inducer_grad_waste_5);
    Inducer_dil_high_to_arr.SetSize(0);
    Inducer_dil_high_to_arr.AddAsLast(ML_STAR.inducer_gradient_high_to_1);
    Inducer_dil_high_to_arr.AddAsLast(ML_STAR.inducer_gradient_high_to_2);
    Inducer_dil_high_to_arr.AddAsLast(ML_STAR.inducer_gradient_high_to_3);
    Inducer_dil_high_to_arr.AddAsLast(ML_STAR.inducer_gradient_high_to_4);
    Inducer_dil_high_to_arr.AddAsLast(ML_STAR.inducer_gradient_high_to_5);
    Inducer_dil_low_to_arr.SetSize(0);
    Inducer_dil_low_to_arr.AddAsLast(ML_STAR.inducer_gradient_low_to_1);
    Inducer_dil_low_to_arr.AddAsLast(ML_STAR.inducer_gradient_low_to_2);
    Inducer_dil_low_to_arr.AddAsLast(ML_STAR.inducer_gradient_low_to_3);
    Inducer_dil_low_to_arr.AddAsLast(ML_STAR.inducer_gradient_low_to_4);
    Inducer_dil_low_to_arr.AddAsLast(ML_STAR.inducer_gradient_low_to_5);
    dil_series_multiplier = dil_series_factor - 1.0;
    dil_series_multiplier = dil_series_factor / (dil_series_multiplier * 1.0);
    cell_volume = culture_volume / (dilution_factor * 1.0);
    media_volume = culture_volume - cell_volume;
    dil_series_transf_vol = media_volume * dil_series_multiplier;
    dil_series_transf_vol = dil_series_transf_vol - media_volume;
    first_tet_seq = 2;
    if (sequence_number < first_tet_seq)
    {
      inducer_ref_volume = culture_volume;
      tet_ref_volume = culture_volume;
      with_tet = 0;
    }
    else
    {
      with_tet = 1;
      if (sequence_number == first_tet_seq)
      {
        inducer_ref_volume = media_volume;
        tet_ref_volume = culture_volume;
      }
      else
      {
        if (sequence_number > first_tet_seq)
        {
          inducer_ref_volume = media_volume;
          tet_ref_volume = media_volume;
        }
      }
    }
    inducer_max_volume = inducer_ref_volume / (2 * 1.0);
    inducer_max_volume = inducer_max_volume * dil_series_multiplier;
    grad_start_media_volume = media_volume * dil_series_multiplier;
    grad_start_media_volume = grad_start_media_volume - inducer_max_volume;
    if (with_tet == 1)
    {
      grad_start_tet_volume = tet_ref_volume / (10 * 1.0);
      grad_start_tet_volume = grad_start_tet_volume * dil_series_multiplier;
      grad_start_media_volume = grad_start_media_volume - grad_start_tet_volume;
      tet_volume = tet_ref_volume / (10 * 1.0);
      media_volume_no_tet = media_volume;
      media_volume_with_tet = media_volume - tet_volume;
    }
    grad_waste_media_volume = 400;
    inducer_contr_volume = inducer_ref_volume / (10 * 1.0);
    inducer_contr_media_volume = media_volume - inducer_contr_volume;
    TrcTrace(Translate("dil_series_factor: "), dil_series_factor);
    TrcTrace(Translate("dilution_factor: "), dilution_factor);
    TrcTrace(Translate("cell_volume: "), cell_volume);
    TrcTrace(Translate("media_volume: "), media_volume);
    TrcTrace(Translate("dil_series_transf_vol: "), dil_series_transf_vol);
    TrcTrace(Translate("with_tet: "), with_tet);
    TrcTrace(Translate("tet_volume: "), tet_volume);
    TrcTrace(Translate("sequence_number: "), sequence_number);
    MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate and gradient starter plate\n=============================================================="));
    if (is_pipetting == "true")
    {
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", 0);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
      PTL::SetTipHandlingState("TipCountingIdentifier", "");
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupChannelVariable", "");
      PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
      if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_1000_Channels) )
      {
            PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
      if (with_tet == 1)
      {
        pipette_volume = media_volume_with_tet;
        pipette_media(ML_STAR.inducer_zero_at_start_tet, pipette_volume, 1);
        pipette_volume = media_volume_no_tet;
        pipette_media(ML_STAR.inducer_zero_at_start_no_tet, pipette_volume, 1);
      }
      else
      {
        pipette_volume = media_volume;
        pipette_media(ML_STAR.inducer_zero_at_start, pipette_volume, 1);
      }
      ML_STAR.Media_pipette_from.SetCurrentPosition(1);
      pipette_volume = grad_start_media_volume;
      pipette_media(ML_STAR.inducer_grad_start, pipette_volume, 0);
      pipette_volume = inducer_contr_media_volume;
      pipette_media(ML_STAR.inducer_contr, pipette_volume, 0);
      pipette_volume = grad_waste_media_volume;
      pipette_media(Inducer_grad_waste_arr.ElementAt( sequence_number -1), pipette_volume, 0);
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectChannelVariable", "");
      if( 0 == PTL::TipEject(ML_STAR) )
      {
            PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_1.SetOutput(Translate("media into growth plate"), "\n", Translate("media into Abgene plate"), "\n");
        dialogHandle_1.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Media_trough, ML_STAR.Media_source_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    if (with_tet == 1)
    {
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", 0);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
      PTL::SetTipHandlingState("TipCountingIdentifier", "");
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupChannelVariable", "");
      PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
      if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_300_Channels) )
      {
            PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
      pipette_volume = grad_start_tet_volume;
      pipette_selector(ML_STAR.Selector_10x_stock_low, ML_STAR.inducer_grad_start_low, pipette_volume, 1, ML_STAR.Selector_prewet_1_low, ML_STAR.Selector_prewet_2_low);
      pipette_volume = tet_volume;
      pipette_selector(ML_STAR.Selector_10x_stock_low, ML_STAR.inducer_zero_at_start_tet_low, pipette_volume, 0, ML_STAR.Selector_prewet_1_low, ML_STAR.Selector_prewet_2_low);
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectChannelVariable", "");
      if( 0 == PTL::TipEject(ML_STAR) )
      {
            PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", 0);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
      PTL::SetTipHandlingState("TipCountingIdentifier", "");
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupChannelVariable", "");
      PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
      if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_300_Channels) )
      {
            PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
      pipette_volume = grad_start_tet_volume;
      pipette_selector(ML_STAR.Selector_10x_stock_high, ML_STAR.inducer_grad_start_high, pipette_volume, 1, ML_STAR.Selector_prewet_1_high, ML_STAR.Selector_prewet_2_high);
      pipette_volume = tet_volume;
      pipette_selector(ML_STAR.Selector_10x_stock_high, ML_STAR.inducer_zero_at_start_tet_high, pipette_volume, 0, ML_STAR.Selector_prewet_1_high, ML_STAR.Selector_prewet_2_high);
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectChannelVariable", "");
      if( 0 == PTL::TipEject(ML_STAR) )
      {
            PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    MECC::TraceComment(Translate("==============================================================\nDilute inducer (e.g. IPTG) stock into inducer_grad_start and inducer_contr wells\n=============================================================="));
    if (is_pipetting == "true")
    {
      MECC::TraceComment(Translate("****  pipette inducer to grad_start wells"));
      pipette_inducer(ML_STAR.Inducer_1_2x, ML_STAR.inducer_grad_start_1_low, inducer_max_volume);
      pipette_inducer(ML_STAR.Inducer_1_2x, ML_STAR.inducer_grad_start_1_high, inducer_max_volume);
      pipette_inducer(ML_STAR.Inducer_2_2x, ML_STAR.inducer_grad_start_2_low, inducer_max_volume);
      pipette_inducer(ML_STAR.Inducer_2_2x, ML_STAR.inducer_grad_start_2_high, inducer_max_volume);
      MECC::TraceComment(Translate("****  pipette inducer to grad_contr wells"));
      pipette_inducer(ML_STAR.Inducer_1_2x, ML_STAR.inducer_contr_1, inducer_contr_volume);
      pipette_inducer(ML_STAR.Inducer_2_2x, ML_STAR.inducer_contr_2, inducer_contr_volume);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_3.SetOutput(Translate("Reagent stock plate to Growth plate"), "\n");
        dialogHandle_3.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nPipete inducer dilution gradients\n=============================================================="));
    if (is_pipetting == "true")
    {
      pipette_volume = dil_series_transf_vol;
      mix_volume = media_volume * 1;
      pipette_dil_series(ML_STAR.inducer_gradient_high_from, Inducer_dil_high_to_arr.ElementAt( sequence_number -1), pipette_volume, mix_volume, 8);
      pipette_dil_series(ML_STAR.inducer_gradient_low_from, Inducer_dil_low_to_arr.ElementAt( sequence_number -1), pipette_volume, mix_volume, 8);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_2.SetOutput(Translate("Growth plate and Abgene plate"), "\n");
        dialogHandle_2.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    if (plate_number == 1)
    {
      if (plasmid_4_id == "ignore")
      {
        if (is_pipetting == "true")
        {
          pipette_volume = cell_volume;
          {
            sequence arrseqAspirate_6[];
            sequence arrseqDispense_6[];
            arrseqAspirate_6.SetSize(1);
            arrseqAspirate_6.SetAt(0, ML_STAR.Bacteria_Stock_1);
            arrseqDispense_6.SetSize(1);
            arrseqDispense_6.SetAt(0, ML_STAR.Bacteria_dispense);
            PTL::ResetPipettingStateAndSequences("");
            PTL::SetPipettingState("UserResponseTime", hslInfinite);
            PTL::SetPipettingState("ErrorHandling", 5);
            PTL::SetPipettingState("TipCountingEnabled", hslFalse);
            PTL::SetPipettingState("TipCountingIdentifier", "");
            PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
            PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
            PTL::SetPipettingState("CalibrateCarrierChannel", -1);
            PTL::SetPipettingState("InitializeCustomStepID", 0);
            PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
            PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
            PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
            PTL::SetPipettingState("TipPickupCustomStepID", 11);
            PTL::SetPipettingState("TipEjectCustomStepID", 0);
            PTL::SetPipettingState("AspirateCustomStepID", 0);
            PTL::SetPipettingState("DispenseCustomStepID", 0);
            PTL::SetPipettingState("PreDispenseCustomStepID", 0);
            PTL::SetPipettingState("PostDispenseCustomStepID", 0);
            PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
            PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
            PTL::SetPipettingState("InitializeChannelVariable", "");
            PTL::SetPipettingState("InitializeEnabled", hslTrue);
            PTL::SetPipettingState("TipPickupChannelVariable", "");
            PTL::SetPipettingState("TipPickupEnabled", hslTrue);
            PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
            PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
            PTL::SetPipettingState("TipEjectChannelVariable", "");
            PTL::SetPipettingState("AspirateMode", 0);
            PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
            PTL::SetPipettingState("AspirateFluidHeight", 0);
            PTL::SetPipettingState("AspirateSubmergeDepth", 2);
            PTL::SetPipettingState("AspirateChannelVariable", "");
            PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
            PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
            PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
            PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
            PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
            PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
            PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
            PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
            PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
            PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
            PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
            PTL::SetPipettingState("AspiratePrerinsingMixCycles", 1);
            PTL::SetPipettingState("AspiratePrerinsingMixPosition", 8);
            PTL::SetPipettingState("AspiratePrerinsingMixVolume", 800);
            PTL::SetPipettingState("DispenseSubmergeDepth", 0);
            PTL::SetPipettingState("DispenseChannelVariable", "");
            PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
            PTL::SetPipettingState("DispenseFluidHeight", 5);
            PTL::SetPipettingState("DispenseMode", 3);
            PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
            PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
            PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
            PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
            PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
            PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
            PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
            PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
            PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
            PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
            PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
            PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
            if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_6, arrseqDispense_6, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Bacteria_Stock_1, ML_STAR.Bacteria_dispense) )
            {
                  PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
            }
          }
        }
        else
        {
          if (is_debugging == "true")
          {
            dialogHandle_5.SetOutput(Translate("cells into growth plate"), "\n");
            dialogHandle_5.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          }
        }
      }
      else
      {
        if (is_pipetting == "true")
        {
          pipette_volume = cell_volume;
          {
            sequence arrseqAspirate_7[];
            sequence arrseqDispense_7[];
            arrseqAspirate_7.SetSize(1);
            arrseqAspirate_7.SetAt(0, ML_STAR.Bacteria_Stock_4strains);
            arrseqDispense_7.SetSize(1);
            arrseqDispense_7.SetAt(0, ML_STAR.Bacteria_dispense);
            PTL::ResetPipettingStateAndSequences("");
            PTL::SetPipettingState("UserResponseTime", hslInfinite);
            PTL::SetPipettingState("ErrorHandling", 5);
            PTL::SetPipettingState("TipCountingEnabled", hslFalse);
            PTL::SetPipettingState("TipCountingIdentifier", "");
            PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
            PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
            PTL::SetPipettingState("CalibrateCarrierChannel", -1);
            PTL::SetPipettingState("InitializeCustomStepID", 0);
            PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
            PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
            PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
            PTL::SetPipettingState("TipPickupCustomStepID", 11);
            PTL::SetPipettingState("TipEjectCustomStepID", 0);
            PTL::SetPipettingState("AspirateCustomStepID", 0);
            PTL::SetPipettingState("DispenseCustomStepID", 0);
            PTL::SetPipettingState("PreDispenseCustomStepID", 0);
            PTL::SetPipettingState("PostDispenseCustomStepID", 0);
            PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
            PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
            PTL::SetPipettingState("InitializeChannelVariable", "");
            PTL::SetPipettingState("InitializeEnabled", hslTrue);
            PTL::SetPipettingState("TipPickupChannelVariable", "");
            PTL::SetPipettingState("TipPickupEnabled", hslTrue);
            PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
            PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
            PTL::SetPipettingState("TipEjectChannelVariable", "");
            PTL::SetPipettingState("AspirateMode", 0);
            PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
            PTL::SetPipettingState("AspirateFluidHeight", 0);
            PTL::SetPipettingState("AspirateSubmergeDepth", 2);
            PTL::SetPipettingState("AspirateChannelVariable", "");
            PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
            PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
            PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
            PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
            PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
            PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
            PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
            PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
            PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
            PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
            PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
            PTL::SetPipettingState("AspiratePrerinsingMixCycles", 1);
            PTL::SetPipettingState("AspiratePrerinsingMixPosition", 8);
            PTL::SetPipettingState("AspiratePrerinsingMixVolume", 800);
            PTL::SetPipettingState("DispenseSubmergeDepth", 0);
            PTL::SetPipettingState("DispenseChannelVariable", "");
            PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
            PTL::SetPipettingState("DispenseFluidHeight", 5);
            PTL::SetPipettingState("DispenseMode", 3);
            PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
            PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
            PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
            PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
            PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
            PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
            PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
            PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
            PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
            PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
            PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
            PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
            if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_7, arrseqDispense_7, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Bacteria_Stock_4strains, ML_STAR.Bacteria_dispense) )
            {
                  PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
            }
          }
        }
        else
        {
          if (is_debugging == "true")
          {
            dialogHandle_4.SetOutput(Translate("cells into growth plate"), "\n");
            dialogHandle_4.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          }
        }
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    if (plate_number == 1)
    {
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_ABGene_plate, ML_STAR.ABGene_plate_0002_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
      PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Lid_parking_Old_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    }
    else
    {
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_ABGene_plate, ML_STAR.ABGene_plate_0002_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    }
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CalculateOutputs();
    SaveWorklistAndMetadata();
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_ExitLibrary();
  } }
