private function CalculateOutputs(  ) void ;
private function CleanUp(  ) void ;
private function GetParams(  ) void ;
private function SaveWorklistAndMetadata(  ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function CleanUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        TipCount::Write2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        TipCount::Write2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        TipCount::Write2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 4)
      {
        TipCount::Write2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR, ML_STAR.clear_96_head_seq);
}

private function StartUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  TIP_HANDLING_WITH_96_HEAD::GetTipCounters(tip_counter_array, 1);
  tip_seq_arr.SetSize(0);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_300_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_50_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Offset_pickup);
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 4)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
}

private function CalculateOutputs(  ) void {
  private variable prop_arr[];
  private sequence plasmid_seq_arr[];
  private variable plas_num;
  MECC::TraceComment(Translate("******** Starting CalculateOutputs Submethod *********************"));
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "inducer_conc", 0);
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "additive_conc", 0);
  strain_str = "strain";
  plasmid_str = "plasmid";
  plasmid_seq_arr.SetSize(0);
  plasmid_seq_arr.AddAsLast(ML_STAR.plasmid_01);
  plasmid_seq_arr.AddAsLast(ML_STAR.plasmid_02);
  plasmid_seq_arr.AddAsLast(ML_STAR.plasmid_03);
  plasmid_seq_arr.AddAsLast(ML_STAR.plasmid_04);
  plasmid_seq_arr.AddAsLast(ML_STAR.plasmid_05);
  plasmid_seq_arr.AddAsLast(ML_STAR.plasmid_06);
  plasmid_seq_arr.AddAsLast(ML_STAR.plasmid_07);
  plasmid_seq_arr.AddAsLast(ML_STAR.plasmid_08);
  plasmid_seq_arr.AddAsLast(ML_STAR.plasmid_09);
  plasmid_seq_arr.AddAsLast(ML_STAR.plasmid_10);
  plasmid_seq_arr.AddAsLast(ML_STAR.plasmid_11);
  plasmid_seq_arr.AddAsLast(ML_STAR.plasmid_12);
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, Translate("strain"), strain_1_id);
  prop_arr.SetSize(0);
  prop_arr.AddAsLast(Translate("plasmid"));
  {
    for(plas_num = 0; plas_num < 12;)
    {
      plas_num = plas_num + 1;
      SeqSetPropertyRange(plasmid_seq_arr.ElementAt( plas_num -1), 1, 8, Translate("plasmid"), plasmid_id_arr.ElementAt( plas_num -1));
      LMSF_UTILITIES::SeqCopyPropsFromShortSeq(plasmid_seq_arr.ElementAt( plas_num -1), prop_arr, ML_STAR.Growth_Plate);
    }
  }
  MECC::TraceComment(Translate("******** Completed CalculateOutputs Submethod *********************"));
}

private function SaveWorklistAndMetadata(  ) void {
  private variable inducer_conc;
  private variable row_id;
  private variable well_id;
  private variable plasmid;
  private variable strain;
  private variable position;
  private variable column_id;
  private variable column_id_str;
  private file file1;
  private variable iniFilePath;
  private variable iniDir;
  private variable iniExists;
  private variable loopCounter2;
  private variable additive_conc;
  private variable inducer_id;
  private variable inducer_units;
  private variable additive_id;
  private variable additive_units;
  MECC::TraceComment(Translate("******** Starting SaveWorklistAndMetadata Submethod *********************"));
  inducer_id = Translate("none");
  inducer_units = Translate("none");
  additive_id = Translate("none");
  additive_units = Translate("none");
  file1.AddField("position", position, hslInteger);
  file1.AddField("well", well_id, hslString, 255);
  file1.AddField("row", row_id, hslString, 255);
  file1.AddField("column", column_id, hslInteger);
  file1.AddField("inducerId", inducer_id, hslString, 255);
  file1.AddField("inducerConcentration", inducer_conc, hslFloat);
  file1.AddField("inducerUnits", inducer_units, hslString, 255);
  file1.AddField("selectorId", additive_id, hslString, 255);
  file1.AddField("selectorConc", additive_conc, hslString, 255);
  file1.AddField("selectorUnits", additive_units, hslString, 255);
  file1.AddField(strain_str, strain, hslString, 255);
  file1.AddField(plasmid_str, plasmid, hslString, 255);
  file1.SetDelimiter(hslCSVDelimited);
  if( 0 == file1.Open(worklist_file_path, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, worklist_file_path, "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    ML_STAR.Growth_Plate.SetCurrentPosition(1);
    while (
       (ML_STAR.Growth_Plate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.Growth_Plate, 1);
      loopCounter2 = loopCounter2 + 1;
      position = ML_STAR.Growth_Plate.GetCurrentPosition();
      well_id = SeqGetPositionId(ML_STAR.Growth_Plate);
      row_id = StrLeft(well_id, 1);
      column_id_str = StrMid(well_id, 1, 2);
      column_id = StrIVal(column_id_str);
      inducer_conc = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("inducer_conc"));
      additive_conc = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("additive_conc"));
      strain = SeqGetProperty(ML_STAR.Growth_Plate, position, strain_str);
      plasmid = SeqGetProperty(ML_STAR.Growth_Plate, position, plasmid_str);
      if( 0 == file1.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      SeqIncrement(ML_STAR.Growth_Plate, 1);
      if (
         (ML_STAR.Growth_Plate.GetCurrentPosition() > 0 && ML_STAR.Growth_Plate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.Growth_Plate.SetMax(ML_STAR.Growth_Plate.GetTotal());
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  iniDir = HSLExtensions::File::GetDirectoryName(worklist_file_path);
  iniFilePath = iniDir + "\\schema.ini";
  iniExists = HSLExtensions::File::Exists(iniFilePath);
  if (iniExists == 1)
  {
    HSLExtensions::File::Delete(iniFilePath);
  }
  MECC::TraceComment(Translate("******** Completed SaveWorklistAndMetadata Submethod *********************"));
}

private function GetParams(  ) void {
  private variable param_dict;
  private variable loc;
  private variable read_line;
  private file file1;
  private variable split_line[];
  private variable loopCounter2;
  private variable culture_volume_str;
  private variable plasmid_id;
  private variable plasmid_key;
  private variable plas_num;
  param_dict = "param_dict";
  HSLExtensions::Dictionary::CreateDictionary(param_dict, 2);
  file1.AddField(1, read_line, hslString);
  file1.SetDelimiter(hslAsciiText);
  if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    while (
       (file1.Eof() == 0)
    )
    {
      loopCounter2 = loopCounter2 + 1;
      if( 0 == file1.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      loc = StrFind(read_line, ",");
      if (loc > 0)
      {
        split_line = HSLExtensions::String::Split(read_line, Translate(","), 1);
        HSLExtensions::Dictionary::AddItem(param_dict, split_line.ElementAt( 1 -1), split_line.ElementAt( 2 -1));
      }
    }
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  worklist_file_path = HSLExtensions::Dictionary::GetItem(param_dict, Translate("worklistFile"));
  strain_1_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("strain1"));
  plasmid_id_arr.SetSize(0);
  {
    for(plas_num = 0; plas_num < 12;)
    {
      plas_num = plas_num + 1;
      plasmid_key = StrConcat2(Translate("plasmid"), plas_num);
      plasmid_id = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), plasmid_key);
      plasmid_id_arr.AddAsLast(plasmid_id);
    }
  }
  is_pipetting = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isPipetting"));
  is_debugging = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isDebugging"));
  culture_volume_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("cultureVolume"));
  culture_volume = StrFVal(culture_volume_str);
  if (culture_volume > 500)
  {
    culture_volume = 500;
  }
  else
  {
    if (culture_volume < 200)
    {
      culture_volume = 200;
    }
  }
}
