 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLFileDirectoryLib.hsl" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
#include "Integrated Inducer Gradient and Cytometry.res"
variable loopCounter1;
variable mix_volume;
variable volume_left;
variable inducer_stock_concentration;
variable plasmid_1_id;
variable plasmid_2_id;
variable strain_1_id;
variable strain_2_id;
variable inducer_id;
variable inducer_units;
variable worklist_file_path;
variable conc_str;
variable plasmid_str;
variable strain_str;
global device ML_STAR ("Integrated Inducer Gradient and Cytometry.lay", "ML_STAR", hslTrue);
variable tip_counter_array[];
variable culture_volume;
variable volume_ratio;
variable pipette_volume;
variable pipette_volume_2;
variable sequence_number;
variable inducer2_units;
variable inducer2_stock_concentration;
variable inducer2_id;
sequence inducer1_2x_arr[];
sequence inducer2_2x_arr[];
sequence inducer_dilution_from_arr[];
sequence inducer_dilution_to_arr[];
sequence Bacteria_1_100x_arr[];
sequence Bacteria_2_100x_arr[];
sequence Bacteria_all_10x_arr[];
sequence Bacteria_all_100x_arr[];
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    GetParams();
    StartUp();
    volume_ratio = culture_volume / (500 * 1.0);
    inducer1_2x_arr.SetSize(0);
    inducer1_2x_arr.AddAsLast(ML_STAR.inducer1_2x_1);
    inducer1_2x_arr.AddAsLast(ML_STAR.inducer1_2x_2);
    inducer1_2x_arr.AddAsLast(ML_STAR.inducer1_2x_3);
    inducer1_2x_arr.AddAsLast(ML_STAR.inducer1_2x_4);
    inducer2_2x_arr.SetSize(0);
    inducer2_2x_arr.AddAsLast(ML_STAR.inducer2_2x_1);
    inducer2_2x_arr.AddAsLast(ML_STAR.inducer2_2x_2);
    inducer2_2x_arr.AddAsLast(ML_STAR.inducer2_2x_3);
    inducer2_2x_arr.AddAsLast(ML_STAR.inducer2_2x_4);
    inducer_dilution_from_arr.SetSize(0);
    inducer_dilution_from_arr.AddAsLast(ML_STAR.IPTG_dilution_from_1);
    inducer_dilution_from_arr.AddAsLast(ML_STAR.IPTG_dilution_from_2);
    inducer_dilution_from_arr.AddAsLast(ML_STAR.IPTG_dilution_from_3);
    inducer_dilution_from_arr.AddAsLast(ML_STAR.IPTG_dilution_from_4);
    inducer_dilution_to_arr.SetSize(0);
    inducer_dilution_to_arr.AddAsLast(ML_STAR.IPTG_dilution_to_1);
    inducer_dilution_to_arr.AddAsLast(ML_STAR.IPTG_dilution_to_2);
    inducer_dilution_to_arr.AddAsLast(ML_STAR.IPTG_dilution_to_3);
    inducer_dilution_to_arr.AddAsLast(ML_STAR.IPTG_dilution_to_4);
    Bacteria_1_100x_arr.SetSize(0);
    Bacteria_1_100x_arr.AddAsLast(ML_STAR.Bacteria_1_100x_1);
    Bacteria_1_100x_arr.AddAsLast(ML_STAR.Bacteria_1_100x_2);
    Bacteria_1_100x_arr.AddAsLast(ML_STAR.Bacteria_1_100x_3);
    Bacteria_1_100x_arr.AddAsLast(ML_STAR.Bacteria_1_100x_4);
    Bacteria_2_100x_arr.SetSize(0);
    Bacteria_2_100x_arr.AddAsLast(ML_STAR.Bacteria_2_100x_1);
    Bacteria_2_100x_arr.AddAsLast(ML_STAR.Bacteria_2_100x_2);
    Bacteria_2_100x_arr.AddAsLast(ML_STAR.Bacteria_2_100x_3);
    Bacteria_2_100x_arr.AddAsLast(ML_STAR.Bacteria_2_100x_4);
    Bacteria_all_10x_arr.SetSize(0);
    Bacteria_all_10x_arr.AddAsLast(ML_STAR.Bacteria_all_10x_1);
    Bacteria_all_10x_arr.AddAsLast(ML_STAR.Bacteria_all_10x_2);
    Bacteria_all_10x_arr.AddAsLast(ML_STAR.Bacteria_all_10x_3);
    Bacteria_all_10x_arr.AddAsLast(ML_STAR.Bacteria_all_10x_4);
    Bacteria_all_100x_arr.SetSize(0);
    Bacteria_all_100x_arr.AddAsLast(ML_STAR.Bacteria_all_100x_1);
    Bacteria_all_100x_arr.AddAsLast(ML_STAR.Bacteria_all_100x_2);
    Bacteria_all_100x_arr.AddAsLast(ML_STAR.Bacteria_all_100x_3);
    Bacteria_all_100x_arr.AddAsLast(ML_STAR.Bacteria_all_100x_4);
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.ABGene_plate_0002_lid, ML_STAR.Lid_parking_ABGene_plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_source_lid, ML_STAR.Lid_parking_Media_trough, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    PTL::ResetTipHandlingState();
    PTL::SetTipHandlingState("UserResponseTime", 0);
    PTL::SetTipHandlingState("ErrorHandling", 3);
    PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
    PTL::SetTipHandlingState("TipCountingIdentifier", "");
    PTL::SetTipHandlingState("InitializeCustomStepID", 0);
    PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
    PTL::SetTipHandlingState("TipPickupChannelVariable", "");
    PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
    PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
    if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_1000_Channels) )
    {
          PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    MECC::TraceComment(Translate("=================================================\nPipette media for inducer dilution\n================================================="));
    pipette_volume = volume_ratio * 700;
    if (sequence_number == 1)
    {
      {
        sequence arrseqAspirate_1[];
        sequence arrseqDispense_1[];
        arrseqAspirate_1.SetSize(1);
        arrseqAspirate_1.SetAt(0, ML_STAR.Media_source);
        arrseqDispense_1.SetSize(1);
        arrseqDispense_1.SetAt(0, ML_STAR.IPTG_2x_1);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 5);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 11);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseSubmergeDepth", 0);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
        PTL::SetPipettingState("DispenseFluidHeight", 5);
        PTL::SetPipettingState("DispenseMode", 1);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_1, arrseqDispense_1, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, ML_STAR.IPTG_2x_1) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
    }
    if (sequence_number == 2)
    {
      {
        sequence arrseqAspirate_2[];
        sequence arrseqDispense_2[];
        arrseqAspirate_2.SetSize(1);
        arrseqAspirate_2.SetAt(0, ML_STAR.Media_source);
        arrseqDispense_2.SetSize(1);
        arrseqDispense_2.SetAt(0, ML_STAR.IPTG_2x_2);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 5);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 11);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseSubmergeDepth", 0);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
        PTL::SetPipettingState("DispenseFluidHeight", 5);
        PTL::SetPipettingState("DispenseMode", 1);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_2, arrseqDispense_2, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, ML_STAR.IPTG_2x_2) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
    }
    if (sequence_number == 3)
    {
      {
        sequence arrseqAspirate_3[];
        sequence arrseqDispense_3[];
        arrseqAspirate_3.SetSize(1);
        arrseqAspirate_3.SetAt(0, ML_STAR.Media_source);
        arrseqDispense_3.SetSize(1);
        arrseqDispense_3.SetAt(0, ML_STAR.IPTG_2x_3);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 5);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 11);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseSubmergeDepth", 0);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
        PTL::SetPipettingState("DispenseFluidHeight", 5);
        PTL::SetPipettingState("DispenseMode", 1);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_3, arrseqDispense_3, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, ML_STAR.IPTG_2x_3) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
    }
    if (sequence_number == 4)
    {
      {
        sequence arrseqAspirate_4[];
        sequence arrseqDispense_4[];
        arrseqAspirate_4.SetSize(1);
        arrseqAspirate_4.SetAt(0, ML_STAR.Media_source);
        arrseqDispense_4.SetSize(1);
        arrseqDispense_4.SetAt(0, ML_STAR.IPTG_2x_4);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 5);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 11);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseSubmergeDepth", 0);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
        PTL::SetPipettingState("DispenseFluidHeight", 5);
        PTL::SetPipettingState("DispenseMode", 1);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_4, arrseqDispense_4, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, ML_STAR.IPTG_2x_4) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
    }
    MECC::TraceComment(Translate("=================================================\nPipette media into growth plate\n================================================="));
    pipette_volume = volume_ratio * 500;
    {
      sequence arrseqAspirate_5[];
      sequence arrseqDispense_5[];
      arrseqAspirate_5.SetSize(1);
      arrseqAspirate_5.SetAt(0, ML_STAR.Media_source);
      arrseqDispense_5.SetSize(1);
      arrseqDispense_5.SetAt(0, ML_STAR.No_bacteria);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 5);
      PTL::SetPipettingState("DispenseMode", 1);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_5, arrseqDispense_5, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, ML_STAR.No_bacteria) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    pipette_volume = volume_ratio * 450;
    {
      sequence arrseqAspirate_6[];
      sequence arrseqDispense_6[];
      arrseqAspirate_6.SetSize(1);
      arrseqAspirate_6.SetAt(0, ML_STAR.Media_source);
      arrseqDispense_6.SetSize(1);
      arrseqDispense_6.SetAt(0, ML_STAR.Media_dispense);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 5);
      PTL::SetPipettingState("DispenseMode", 1);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_6, arrseqDispense_6, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, ML_STAR.Media_dispense) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    MECC::TraceComment(Translate("        =================================================\n        Distribute media for bacteria\n        ================================================="));
    ML_STAR.Media_source.SetCurrentPosition(1);
    PTL::ResetTipHandlingState();
    PTL::SetTipHandlingState("UserResponseTime", 0);
    PTL::SetTipHandlingState("ErrorHandling", 3);
    PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
    PTL::SetTipHandlingState("TipCountingIdentifier", "");
    PTL::SetTipHandlingState("InitializeCustomStepID", 0);
    PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
    PTL::SetTipHandlingState("TipPickupChannelVariable", "");
    PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
    PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
    if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_1000_Channels) )
    {
          PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    pipette_volume = volume_ratio * 720;
    pipette_volume_2 = volume_ratio * 800;
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Media_trough, ML_STAR.Media_source_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("=================================================\nDilute inducer from stock\n================================================="));
    pipette_volume = volume_ratio * 200;
    PTL::ResetTipHandlingState();
    PTL::SetTipHandlingState("UserResponseTime", 0);
    PTL::SetTipHandlingState("ErrorHandling", 3);
    PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
    PTL::SetTipHandlingState("TipCountingIdentifier", "");
    PTL::SetTipHandlingState("InitializeCustomStepID", 0);
    PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
    PTL::SetTipHandlingState("TipPickupChannelVariable", "11110000");
    PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
    PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
    if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_300_Channels) )
    {
          PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    {
      sequence arrseqAspirate_7[];
      sequence arrseqDispense_7[];
      Util2::SeqArrCheckIndex(inducer1_2x_arr, sequence_number, "inducer1_2x_arr");
      Util2::SeqArrCheckIndex(inducer1_2x_arr, sequence_number, "inducer1_2x_arr");
      arrseqAspirate_7.SetSize(1);
      arrseqAspirate_7.SetAt(0, ML_STAR.inducer1_stock);
      arrseqDispense_7.SetSize(1);
      arrseqDispense_7.SetAt(0, inducer1_2x_arr.ElementAt(sequence_number-1));
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "11110000");
      PTL::SetPipettingState("InitializeEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupChannelVariable", "11110000");
      PTL::SetPipettingState("TipPickupEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "11110000");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "11110000");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "11110000");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_300_Channels, arrseqAspirate_7, arrseqDispense_7, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.inducer1_stock, inducer1_2x_arr.ElementAt(sequence_number-1)) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    PTL::ResetTipHandlingState();
    PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
    PTL::SetTipHandlingState("ErrorHandling", 3);
    PTL::SetTipHandlingState("InitializeCustomStepID", 0);
    PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
    PTL::SetTipHandlingState("TipEjectChannelVariable", "11110000");
    if( 0 == PTL::TipEject(ML_STAR) )
    {
          PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    PTL::ResetTipHandlingState();
    PTL::SetTipHandlingState("UserResponseTime", 0);
    PTL::SetTipHandlingState("ErrorHandling", 3);
    PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
    PTL::SetTipHandlingState("TipCountingIdentifier", "");
    PTL::SetTipHandlingState("InitializeCustomStepID", 0);
    PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
    PTL::SetTipHandlingState("TipPickupChannelVariable", "00001111");
    PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
    PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
    if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_300_Channels) )
    {
          PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    {
      sequence arrseqAspirate_8[];
      sequence arrseqDispense_8[];
      Util2::SeqArrCheckIndex(inducer2_2x_arr, sequence_number, "inducer2_2x_arr");
      Util2::SeqArrCheckIndex(inducer2_2x_arr, sequence_number, "inducer2_2x_arr");
      arrseqAspirate_8.SetSize(1);
      arrseqAspirate_8.SetAt(0, ML_STAR.inducer2_stock);
      arrseqDispense_8.SetSize(1);
      arrseqDispense_8.SetAt(0, inducer2_2x_arr.ElementAt(sequence_number-1));
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "00001111");
      PTL::SetPipettingState("InitializeEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupChannelVariable", "00001111");
      PTL::SetPipettingState("TipPickupEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "00001111");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "00001111");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "00001111");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_300_Channels, arrseqAspirate_8, arrseqDispense_8, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.inducer2_stock, inducer2_2x_arr.ElementAt(sequence_number-1)) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    PTL::ResetTipHandlingState();
    PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
    PTL::SetTipHandlingState("ErrorHandling", 3);
    PTL::SetTipHandlingState("InitializeCustomStepID", 0);
    PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
    PTL::SetTipHandlingState("TipEjectChannelVariable", "00001111");
    if( 0 == PTL::TipEject(ML_STAR) )
    {
          PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("=================================================\nPipette serial inducer gradient\n================================================="));
    pipette_volume = volume_ratio * 450;
    PTL::ResetTipHandlingState();
    PTL::SetTipHandlingState("UserResponseTime", 0);
    PTL::SetTipHandlingState("ErrorHandling", 3);
    PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
    PTL::SetTipHandlingState("TipCountingIdentifier", "");
    PTL::SetTipHandlingState("InitializeCustomStepID", 0);
    PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
    PTL::SetTipHandlingState("TipPickupChannelVariable", "");
    PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
    PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
    if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_1000_Channels) )
    {
          PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    {
      sequence arrseqAspirate_9[];
      sequence arrseqDispense_9[];
      Util2::SeqArrCheckIndex(inducer_dilution_from_arr, sequence_number, "inducer_dilution_from_arr");
      Util2::SeqArrCheckIndex(inducer_dilution_from_arr, sequence_number, "inducer_dilution_from_arr");
      Util2::SeqArrCheckIndex(inducer_dilution_to_arr, sequence_number, "inducer_dilution_to_arr");
      Util2::SeqArrCheckIndex(inducer_dilution_to_arr, sequence_number, "inducer_dilution_to_arr");
      arrseqAspirate_9.SetSize(1);
      arrseqAspirate_9.SetAt(0, inducer_dilution_from_arr.ElementAt(sequence_number-1));
      arrseqDispense_9.SetSize(1);
      arrseqDispense_9.SetAt(0, inducer_dilution_to_arr.ElementAt(sequence_number-1));
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
      PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3);
      PTL::SetPipettingState("AspiratePrerinsingMixVolume", 800);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslTrue);
      PTL::SetPipettingState("DispenseSequenceReducible", hslTrue);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_9, arrseqDispense_9, 1, 1, pipette_volume, 0, 1, hslInfinite, hslInfinite, hslInfinite, "", inducer_dilution_from_arr.ElementAt(sequence_number-1), inducer_dilution_to_arr.ElementAt(sequence_number-1)) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    PTL::ResetTipHandlingState();
    PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
    PTL::SetTipHandlingState("ErrorHandling", 3);
    PTL::SetTipHandlingState("InitializeCustomStepID", 0);
    PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
    PTL::SetTipHandlingState("TipEjectChannelVariable", "");
    if( 0 == PTL::TipEject(ML_STAR) )
    {
          PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    MECC::TraceComment(Translate("=================================================\nPipette bacteria\n================================================="));
    MECC::TraceComment(Translate("        =================================================\n        Dilute bacteria\n        ================================================="));
    pipette_volume = volume_ratio * 80;
    PTL::ResetTipHandlingState();
    PTL::SetTipHandlingState("UserResponseTime", 0);
    PTL::SetTipHandlingState("ErrorHandling", 3);
    PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
    PTL::SetTipHandlingState("TipCountingIdentifier", "");
    PTL::SetTipHandlingState("InitializeCustomStepID", 0);
    PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
    PTL::SetTipHandlingState("TipPickupChannelVariable", "11100000");
    PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
    PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
    if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_1000_Channels) )
    {
          PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    {
      sequence arrseqAspirate_10[];
      sequence arrseqDispense_10[];
      Util2::SeqArrCheckIndex(Bacteria_1_100x_arr, sequence_number, "Bacteria_1_100x_arr");
      Util2::SeqArrCheckIndex(Bacteria_1_100x_arr, sequence_number, "Bacteria_1_100x_arr");
      arrseqAspirate_10.SetSize(1);
      arrseqAspirate_10.SetAt(0, ML_STAR.Bacteria_stock_1);
      arrseqDispense_10.SetSize(1);
      arrseqDispense_10.SetAt(0, Bacteria_1_100x_arr.ElementAt(sequence_number-1));
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "11100000");
      PTL::SetPipettingState("InitializeEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupChannelVariable", "11100000");
      PTL::SetPipettingState("TipPickupEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "11100000");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "11100000");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
      PTL::SetPipettingState("AspiratePrerinsingMixPosition", 5);
      PTL::SetPipettingState("AspiratePrerinsingMixVolume", 300);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "11100000");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      PTL::SetPipettingState("DispensePrerinsingMixCycles", 2);
      PTL::SetPipettingState("DispensePrerinsingMixPosition", 2);
      PTL::SetPipettingState("DispensePrerinsingMixVolume", 800);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_10, arrseqDispense_10, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Bacteria_stock_1, Bacteria_1_100x_arr.ElementAt(sequence_number-1)) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    PTL::ResetTipHandlingState();
    PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
    PTL::SetTipHandlingState("ErrorHandling", 3);
    PTL::SetTipHandlingState("InitializeCustomStepID", 0);
    PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
    PTL::SetTipHandlingState("TipEjectChannelVariable", "11100000");
    if( 0 == PTL::TipEject(ML_STAR) )
    {
          PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    PTL::ResetTipHandlingState();
    PTL::SetTipHandlingState("UserResponseTime", 0);
    PTL::SetTipHandlingState("ErrorHandling", 3);
    PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
    PTL::SetTipHandlingState("TipCountingIdentifier", "");
    PTL::SetTipHandlingState("InitializeCustomStepID", 0);
    PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
    PTL::SetTipHandlingState("TipPickupChannelVariable", "00000111");
    PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
    PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
    if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_1000_Channels) )
    {
          PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    {
      sequence arrseqAspirate_11[];
      sequence arrseqDispense_11[];
      Util2::SeqArrCheckIndex(Bacteria_2_100x_arr, sequence_number, "Bacteria_2_100x_arr");
      Util2::SeqArrCheckIndex(Bacteria_2_100x_arr, sequence_number, "Bacteria_2_100x_arr");
      arrseqAspirate_11.SetSize(1);
      arrseqAspirate_11.SetAt(0, ML_STAR.Bacteria_stock_2);
      arrseqDispense_11.SetSize(1);
      arrseqDispense_11.SetAt(0, Bacteria_2_100x_arr.ElementAt(sequence_number-1));
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "00000111");
      PTL::SetPipettingState("InitializeEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupChannelVariable", "00000111");
      PTL::SetPipettingState("TipPickupEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "00000111");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "00000111");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
      PTL::SetPipettingState("AspiratePrerinsingMixPosition", 5);
      PTL::SetPipettingState("AspiratePrerinsingMixVolume", 300);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "00000111");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      PTL::SetPipettingState("DispensePrerinsingMixCycles", 2);
      PTL::SetPipettingState("DispensePrerinsingMixPosition", 2);
      PTL::SetPipettingState("DispensePrerinsingMixVolume", 800);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_11, arrseqDispense_11, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Bacteria_stock_2, Bacteria_2_100x_arr.ElementAt(sequence_number-1)) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    PTL::ResetTipHandlingState();
    PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
    PTL::SetTipHandlingState("ErrorHandling", 3);
    PTL::SetTipHandlingState("InitializeCustomStepID", 0);
    PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
    PTL::SetTipHandlingState("TipEjectChannelVariable", "00000111");
    if( 0 == PTL::TipEject(ML_STAR) )
    {
          PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    PTL::ResetTipHandlingState();
    PTL::SetTipHandlingState("UserResponseTime", 0);
    PTL::SetTipHandlingState("ErrorHandling", 3);
    PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
    PTL::SetTipHandlingState("TipCountingIdentifier", "");
    PTL::SetTipHandlingState("InitializeCustomStepID", 0);
    PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
    PTL::SetTipHandlingState("TipPickupChannelVariable", "");
    PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
    PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
    if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_1000_Channels) )
    {
          PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    {
      sequence arrseqAspirate_12[];
      sequence arrseqDispense_12[];
      Util2::SeqArrCheckIndex(Bacteria_all_100x_arr, sequence_number, "Bacteria_all_100x_arr");
      Util2::SeqArrCheckIndex(Bacteria_all_100x_arr, sequence_number, "Bacteria_all_100x_arr");
      Util2::SeqArrCheckIndex(Bacteria_all_10x_arr, sequence_number, "Bacteria_all_10x_arr");
      Util2::SeqArrCheckIndex(Bacteria_all_10x_arr, sequence_number, "Bacteria_all_10x_arr");
      arrseqAspirate_12.SetSize(1);
      arrseqAspirate_12.SetAt(0, Bacteria_all_100x_arr.ElementAt(sequence_number-1));
      arrseqDispense_12.SetSize(1);
      arrseqDispense_12.SetAt(0, Bacteria_all_10x_arr.ElementAt(sequence_number-1));
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
      PTL::SetPipettingState("AspiratePrerinsingMixPosition", 2);
      PTL::SetPipettingState("AspiratePrerinsingMixVolume", 650);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      PTL::SetPipettingState("DispensePrerinsingMixCycles", 2);
      PTL::SetPipettingState("DispensePrerinsingMixPosition", 3.5);
      PTL::SetPipettingState("DispensePrerinsingMixVolume", 650);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_12, arrseqDispense_12, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", Bacteria_all_100x_arr.ElementAt(sequence_number-1), Bacteria_all_10x_arr.ElementAt(sequence_number-1)) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    PTL::ResetTipHandlingState();
    PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
    PTL::SetTipHandlingState("ErrorHandling", 3);
    PTL::SetTipHandlingState("InitializeCustomStepID", 0);
    PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
    PTL::SetTipHandlingState("TipEjectChannelVariable", "");
    if( 0 == PTL::TipEject(ML_STAR) )
    {
          PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    MECC::TraceComment(Translate("        =================================================\n        Distribute bacteria across plate\n        ================================================="));
    pipette_volume = volume_ratio * 50;
    volume_left = volume_ratio * 800;
    PTL::ResetTipHandlingState();
    PTL::SetTipHandlingState("UserResponseTime", 0);
    PTL::SetTipHandlingState("ErrorHandling", 3);
    PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
    PTL::SetTipHandlingState("TipCountingIdentifier", "");
    PTL::SetTipHandlingState("InitializeCustomStepID", 0);
    PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
    PTL::SetTipHandlingState("TipPickupChannelVariable", "");
    PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
    PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
    if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_1000_Channels) )
    {
          PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (ML_STAR.Bacteria_dilution_to.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Bacteria_all_10x, 1, ML_STAR.Bacteria_dilution_to, 1);
        loopCounter1 = loopCounter1 + 1;
        mix_volume = volume_left - 100;
        if (sequence_number == 1)
        {
          ML_STAR.Bacteria_all_10x_1.SetCurrentPosition(1);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        if (sequence_number == 2)
        {
          ML_STAR.Bacteria_all_10x_2.SetCurrentPosition(1);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        if (sequence_number == 3)
        {
          ML_STAR.Bacteria_all_10x_3.SetCurrentPosition(1);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        if (sequence_number == 4)
        {
          ML_STAR.Bacteria_all_10x_4.SetCurrentPosition(1);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        volume_left = volume_left - pipette_volume;
        if (
           (ML_STAR.Bacteria_dilution_to.GetCurrentPosition() > 0 && ML_STAR.Bacteria_dilution_to.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Bacteria_all_10x.SetMax(ML_STAR.Bacteria_all_10x.GetTotal());
      ML_STAR.Bacteria_dilution_to.SetMax(ML_STAR.Bacteria_dilution_to.GetTotal());
      ML_STAR.Bacteria_all_10x.SetCurrentPosition(1);
      ML_STAR.Bacteria_dilution_to.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_ABGene_plate, ML_STAR.ABGene_plate_0002_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    if (sequence_number == 1)
    {
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Lid_parking_Old_Growth_Plate_1, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    }
    if (sequence_number == 2)
    {
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Lid_parking_Old_Growth_Plate_2, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    }
    if (sequence_number == 3)
    {
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Lid_parking_Old_Growth_Plate_3, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    }
    if (sequence_number == 4)
    {
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Lid_parking_Old_Growth_Plate_4, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    }
    CalculateOutputs();
    SaveWorklistAndMetadata();
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
  } }
