private function CalculateOutputs(  ) void ;
private function CleanUp(  ) void ;
private function GetParams(  ) void ;
private function SaveWorklistAndMetadata(  ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function CleanUp(  ) void {
  private variable array_length;
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        TipCount::Write2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        TipCount::Write2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        TipCount::Write2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 4)
      {
        TipCount::Write2(ML_STAR.Tips_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR);
}

private function StartUp(  ) void {
  private sequence tip_seq_arr[];
  private variable array_length;
  TIP_HANDLING_WITH_96_HEAD::GetTipCounters(tip_counter_array, 1);
  tip_seq_arr.SetSize(0);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_300_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_50_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_Offset_pickup);
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 4)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
}

private function CalculateOutputs(  ) void {
  private variable inducer_conc;
  private variable loopCounter2;
  private variable loopCounter3;
  private variable labware_id;
  private variable well_id;
  private variable strain;
  private variable plasmid;
  private variable loopCounter4;
  private variable row;
  private variable bool_write_flag;
  private variable position;
  private variable inducer2_conc;
  conc_str = "concentration";
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, conc_str, 0);
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "inducerId", "none");
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "inducerUnits", "none");
  labware_id = "";
  well_id = "";
  inducer_conc = inducer_stock_concentration / (10 * 1.0);
  inducer2_conc = inducer2_stock_concentration / (10 * 1.0);
  {
    loopCounter2 = 0;
    ML_STAR.IPTG_dilution_to.SetCurrentPosition(1);
    while (
       (ML_STAR.IPTG_dilution_to.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.IPTG_dilution_to, 1);
      loopCounter2 = loopCounter2 + 1;
      {
        for(loopCounter3 = 0; loopCounter3 < 4;)
        {
          loopCounter3 = loopCounter3 + 1;
          labware_id = SeqGetLabwareId(ML_STAR.IPTG_dilution_to);
          well_id = SeqGetPositionId(ML_STAR.IPTG_dilution_to);
          LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, conc_str, inducer_conc);
          LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, "inducerId", inducer_id);
          LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, "inducerUnits", inducer_units);
          SeqIncrement(ML_STAR.IPTG_dilution_to, 1);
        }
      }
      {
        for(loopCounter3 = 0; loopCounter3 < 4;)
        {
          loopCounter3 = loopCounter3 + 1;
          labware_id = SeqGetLabwareId(ML_STAR.IPTG_dilution_to);
          well_id = SeqGetPositionId(ML_STAR.IPTG_dilution_to);
          LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, conc_str, inducer2_conc);
          LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, "inducerId", inducer2_id);
          LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, "inducerUnits", inducer2_units);
          SeqIncrement(ML_STAR.IPTG_dilution_to, 1);
        }
      }
      inducer_conc = inducer_conc / (2 * 1.0);
      inducer2_conc = inducer2_conc / (2 * 1.0);
      if (
         (ML_STAR.IPTG_dilution_to.GetCurrentPosition() > 0 && ML_STAR.IPTG_dilution_to.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.IPTG_dilution_to.SetMax(ML_STAR.IPTG_dilution_to.GetTotal());
  }
  strain_str = "strain";
  strain = "none";
  plasmid_str = "plasmid";
  plasmid = "none";
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, strain_str, strain);
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, plasmid_str, plasmid);
  row = "";
  ML_STAR.Growth_Plate.SetCurrentPosition(9);
  {
    loopCounter4 = 0;
    while (
       (ML_STAR.Growth_Plate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.Growth_Plate, 1);
      loopCounter4 = loopCounter4 + 1;
      bool_write_flag = 0;
      position = ML_STAR.Growth_Plate.GetCurrentPosition();
      well_id = SeqGetPositionId(ML_STAR.Growth_Plate);
      row = StrLeft(well_id, 1);
      if (row == "A")
      {
        strain = strain_1_id;
        plasmid = plasmid_1_id;
        bool_write_flag = 1;
      }
      if (row == "B")
      {
        strain = strain_1_id;
        plasmid = plasmid_1_id;
        bool_write_flag = 1;
      }
      if (row == "C")
      {
        strain = strain_1_id;
        plasmid = plasmid_1_id;
        bool_write_flag = 1;
      }
      if (row == "F")
      {
        strain = strain_2_id;
        plasmid = plasmid_2_id;
        bool_write_flag = 1;
      }
      if (row == "G")
      {
        strain = strain_2_id;
        plasmid = plasmid_2_id;
        bool_write_flag = 1;
      }
      if (row == "H")
      {
        strain = strain_2_id;
        plasmid = plasmid_2_id;
        bool_write_flag = 1;
      }
      if (bool_write_flag == 1)
      {
        SeqSetProperty(ML_STAR.Growth_Plate, position, strain_str, strain);
        SeqSetProperty(ML_STAR.Growth_Plate, position, plasmid_str, plasmid);
      }
      SeqIncrement(ML_STAR.Growth_Plate, 1);
      if (
         (ML_STAR.Growth_Plate.GetCurrentPosition() > 0 && ML_STAR.Growth_Plate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.Growth_Plate.SetMax(ML_STAR.Growth_Plate.GetTotal());
  }
}

private function SaveWorklistAndMetadata(  ) void {
  private variable inducer_conc;
  private variable well_id;
  private variable plasmid;
  private variable strain;
  private variable position;
  private variable inducer_col_name;
  private file file1;
  private variable loopCounter2;
  private variable row_id;
  private variable column_id;
  private variable column_id_str;
  private variable iniFilePath;
  private variable iniDir;
  private variable iniExists;
  private variable inducerUnits;
  private variable inducerId;
  if (1 == 0)
  {
    inducer_col_name = inducer_id + " concentration (";
    inducer_col_name = inducer_col_name + inducer_units;
    inducer_col_name = inducer_col_name + ")";
    file1.AddField("position", position, hslInteger);
    file1.AddField("well", well_id, hslString, 255);
    file1.AddField("row", row_id, hslString, 255);
    file1.AddField("column", column_id, hslInteger);
    file1.AddField(inducer_col_name, inducer_conc, hslFloat);
    file1.AddField("strain", strain, hslString, 255);
    file1.AddField("plasmid", plasmid, hslString, 255);
    file1.SetDelimiter(hslCSVDelimited);
    if( 0 == file1.Open(worklist_file_path, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, worklist_file_path, "HxMetEdCompCmd");
    }
  }
  file1.AddField("position", position, hslInteger);
  file1.AddField("well", well_id, hslString, 255);
  file1.AddField("row", row_id, hslString, 255);
  file1.AddField("column", column_id, hslInteger);
  file1.AddField("inducerId", inducerId, hslString, 255);
  file1.AddField(conc_str, inducer_conc, hslFloat);
  file1.AddField("inducerUnits", inducerUnits, hslString, 255);
  file1.AddField(strain_str, strain, hslString, 255);
  file1.AddField(plasmid_str, plasmid, hslString, 255);
  file1.SetDelimiter(hslCSVDelimited);
  if( 0 == file1.Open(worklist_file_path, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, worklist_file_path, "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    ML_STAR.Growth_Plate.SetCurrentPosition(1);
    while (
       (ML_STAR.Growth_Plate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.Growth_Plate, 1);
      loopCounter2 = loopCounter2 + 1;
      position = ML_STAR.Growth_Plate.GetCurrentPosition();
      well_id = SeqGetPositionId(ML_STAR.Growth_Plate);
      row_id = StrLeft(well_id, 1);
      column_id_str = StrMid(well_id, 1, 2);
      column_id = StrIVal(column_id_str);
      inducerId = SeqGetProperty(ML_STAR.Growth_Plate, position, "inducerId");
      inducer_conc = SeqGetProperty(ML_STAR.Growth_Plate, position, conc_str);
      inducerUnits = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("inducerUnits"));
      strain = SeqGetProperty(ML_STAR.Growth_Plate, position, strain_str);
      plasmid = SeqGetProperty(ML_STAR.Growth_Plate, position, plasmid_str);
      if( 0 == file1.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      SeqIncrement(ML_STAR.Growth_Plate, 1);
      if (
         (ML_STAR.Growth_Plate.GetCurrentPosition() > 0 && ML_STAR.Growth_Plate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.Growth_Plate.SetMax(ML_STAR.Growth_Plate.GetTotal());
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  iniDir = HSLExtensions::File::GetDirectoryName(worklist_file_path);
  iniFilePath = iniDir + "\\schema.ini";
  iniExists = HSLExtensions::File::Exists(iniFilePath);
  if (iniExists == 1)
  {
    HSLExtensions::File::Delete(iniFilePath);
  }
}

private function GetParams(  ) void {
  private file file1;
  private variable read_line;
  private variable loopCounter2;
  private variable param_dict;
  private variable split_line[];
  private variable loc;
  private variable inducer_conc_str;
  private variable culture_volume_str;
  private variable plate_number;
  private variable plate_num_str;
  private variable inducer2_conc_str;
  param_dict = "param_dict";
  HSLExtensions::Dictionary::CreateDictionary(param_dict, 2);
  file1.AddField(1, read_line, hslString);
  file1.SetDelimiter(hslAsciiText);
  if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    while (
       (file1.Eof() == 0)
    )
    {
      loopCounter2 = loopCounter2 + 1;
      if( 0 == file1.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      loc = StrFind(read_line, ",");
      if (loc > 0)
      {
        split_line = HSLExtensions::String::Split(read_line, Translate(","), 1);
        HSLExtensions::Dictionary::AddItem(param_dict, split_line.ElementAt( 1 -1), split_line.ElementAt( 2 -1));
      }
    }
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  worklist_file_path = HSLExtensions::Dictionary::GetItem(param_dict, Translate("worklistFile"));
  strain_1_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("strain1"));
  strain_2_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("strain2"));
  plasmid_1_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("plasmid1"));
  plasmid_2_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("plasmid2"));
  inducer_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer1"));
  inducer_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer1StockConc"));
  inducer_stock_concentration = StrFVal(inducer_conc_str);
  inducer_units = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer1StockUnits"));
  inducer2_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer2"));
  inducer2_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer2StockConc"));
  inducer2_stock_concentration = StrFVal(inducer2_conc_str);
  inducer2_units = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer2StockUnits"));
  culture_volume_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("cultureVolume"));
  culture_volume = StrFVal(culture_volume_str);
  if (culture_volume > 500)
  {
    culture_volume = 500;
  }
  else
  {
    if (culture_volume < 200)
    {
      culture_volume = 200;
    }
  }
  plate_num_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("gradPlateNumber"));
  plate_number = StrIVal(plate_num_str);
  sequence_number = plate_number % 4;
  if (sequence_number == 0)
  {
    sequence_number = 4;
  }
}
