private function CleanUp(  ) void ;
private function GetParams(  ) void ;
private function SaveWorklistAndMetadata(  ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function StartUp(  ) void {
  private variable plasmid;
  private variable strain;
  private variable concentration;
  private variable well;
  private file input_file;
  private variable growth_plate_id;
  private variable well_str;
  private variable loopCounter2;
  private variable file_exists;
  private variable loopCounter6;
  private variable wavelength_exists;
  private variable ok_to_procede;
  private variable loopCounter7;
  private variable OD;
  private variable const_offset_value;
  private variable well_by_well;
  private variable OD_zero;
  private variable delta_OD;
  private variable input_file_inducerId;
  private variable input_file_column;
  private variable input_file_inducerUnits;
  private variable input_file_position;
  private variable input_file_row;
  private dialog customDialog_1;
  private dialog customDialog_2;
  private sequence tip_seq_arr[];
  private variable array_length;
  conc_str = "concentration";
  strain_str = "strain";
  plasmid_str = "plasmid";
  well_str = "well";
  OD_str = "OD";
  OD_zero_str = "OD_zero";
  pipette_volume_str = "pipette_volume";
  property_array.SetSize(0);
  property_array.AddAsLast("inducerId");
  property_array.AddAsLast(conc_str);
  property_array.AddAsLast("inducerUnits");
  property_array.AddAsLast(strain_str);
  property_array.AddAsLast(plasmid_str);
  property_array.AddAsLast(OD_str);
  property_array.AddAsLast(OD_zero_str);
  property_array.AddAsLast(pipette_volume_str);
  input_file.AddField("position", input_file_position, hslInteger);
  input_file.AddField("well", well, hslString, 255);
  input_file.AddField("row", input_file_row, hslString, 255);
  input_file.AddField("column", input_file_column, hslInteger);
  input_file.AddField("inducerId", input_file_inducerId, hslString, 255);
  input_file.AddField("concentration", concentration, hslFloat);
  input_file.AddField("inducerUnits", input_file_inducerUnits, hslString, 255);
  input_file.AddField("strain", strain, hslString, 255);
  input_file.AddField("plasmid", plasmid, hslString, 255);
  input_file.SetDelimiter(hslCSVDelimited);
  if( 0 == input_file.Open(input_worklist_path, hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, input_worklist_path, "HxMetEdCompCmd");
  }
  growth_plate_id = SeqGetLabwareId(ML_STAR.Growth_Plate);
  {
    for(loopCounter2 = 0; loopCounter2 < 96;)
    {
      loopCounter2 = loopCounter2 + 1;
      if( 0 == input_file.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      LMSF_UTILITIES::SeqSetPropertyByWell(growth_plate_id, well, ML_STAR.Growth_Plate, Translate("inducerId"), input_file_inducerId);
      LMSF_UTILITIES::SeqSetPropertyByWell(growth_plate_id, well, ML_STAR.Growth_Plate, Translate("inducerUnits"), input_file_inducerUnits);
      LMSF_UTILITIES::SeqSetPropertyByWell(growth_plate_id, well, ML_STAR.Growth_Plate, conc_str, concentration);
      LMSF_UTILITIES::SeqSetPropertyByWell(growth_plate_id, well, ML_STAR.Growth_Plate, strain_str, strain);
      LMSF_UTILITIES::SeqSetPropertyByWell(growth_plate_id, well, ML_STAR.Growth_Plate, plasmid_str, plasmid);
    }
  }
  if( 0 != input_file.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  input_file.RemoveFields();
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, OD_str, 0);
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, OD_zero_str, 0);
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, pipette_volume_str, 0);
  SeqSetPropertyRange(ML_STAR.Cytometry_Plate, 1, 96, OD_str, 0);
  SeqSetPropertyRange(ML_STAR.Cytometry_Plate, 1, 96, OD_zero_str, 0);
  SeqSetPropertyRange(ML_STAR.Cytometry_Plate, 1, 96, pipette_volume_str, 0);
  SeqSetPropertyRange(ML_STAR.Cytometry_Plate, 1, 96, Translate("inducerId"), Translate("none"));
  SeqSetPropertyRange(ML_STAR.Cytometry_Plate, 1, 96, Translate("inducerUnits"), Translate("none"));
  if (normalize_w_OD == "Yes")
  {
    file_exists = 0;
    wavelength_exists = 0;
    ok_to_procede = 0;
    {
      loopCounter6 = 0;
      while (ok_to_procede == 0)
      {
        loopCounter6 = loopCounter6 + 1;
        file_exists = HSLExtensions::File::Exists(gen5_file);
        wavelength_exists = 0;
        if (file_exists == 1)
        {
          wavelength_exists = LMSF_UTILITIES::ReadLastOD(gen5_file, ML_STAR.Growth_Plate, wavelength);
          if (wavelength_exists == 1)
          {
            ok_to_procede = 1;
          }
          else
          {
            customDialog_2.InitCustomDialog("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");
            customDialog_2.SetCustomDialogProperty( "numeric1.Value", wavelength );
            customDialog_2.ShowCustomDialog();
            wavelength = customDialog_2.GetCustomDialogProperty( "numeric1.Value" );
          }
        }
        else
        {
          customDialog_1.InitCustomDialog("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");
          customDialog_1.SetCustomDialogProperty( "path1.Path", gen5_file );
          customDialog_1.SetCustomDialogProperty( "numeric1.Value", wavelength );
          customDialog_1.ShowCustomDialog();
          gen5_file = customDialog_1.GetCustomDialogProperty( "path1.Path" );
          wavelength = customDialog_1.GetCustomDialogProperty( "numeric1.Value" );
        }
      }
    }
    well_by_well = 1;
    if (well_by_well == 1)
    {
      LMSF_UTILITIES::ReadFirstOD(gen5_file, ML_STAR.Growth_Plate, wavelength);
    }
    else
    {
      SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, OD_zero_str, const_offset_value);
    }
    {
      loopCounter7 = 0;
      ML_STAR.Growth_Plate.SetCurrentPosition(1);
      while (
         (ML_STAR.Growth_Plate.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Growth_Plate, 1);
        loopCounter7 = loopCounter7 + 1;
        position = ML_STAR.Growth_Plate.GetCurrentPosition();
        OD = SeqGetProperty(ML_STAR.Growth_Plate, position, OD_str);
        OD_zero = SeqGetProperty(ML_STAR.Growth_Plate, position, OD_zero_str);
        pipette_volume = target_volume;
        pipette_volume = pipette_volume * target_OD;
        delta_OD = OD - OD_zero;
        if (delta_OD > 0)
        {
          pipette_volume = pipette_volume / (delta_OD * 1.0);
        }
        else
        {
          pipette_volume = max_volume;
        }
        if (pipette_volume < min_volume)
        {
          pipette_volume = min_volume;
        }
        if (pipette_volume > max_volume)
        {
          pipette_volume = max_volume;
        }
        SeqSetProperty(ML_STAR.Growth_Plate, position, pipette_volume_str, pipette_volume);
        SeqIncrement(ML_STAR.Growth_Plate, 1);
        if (
           (ML_STAR.Growth_Plate.GetCurrentPosition() > 0 && ML_STAR.Growth_Plate.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Growth_Plate.SetMax(ML_STAR.Growth_Plate.GetTotal());
      ML_STAR.Growth_Plate.SetCurrentPosition(1);
    }
  }
  else
  {
    SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, pipette_volume_str, target_volume);
  }
  TIP_HANDLING_WITH_96_HEAD::GetTipCounters(tip_counter_array, 1);
  tip_seq_arr.SetSize(0);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_300_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_50_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_Offset_pickup);
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 4)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
}

private function CleanUp(  ) void {
  private variable array_length;
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        TipCount::Write2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        TipCount::Write2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        TipCount::Write2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 4)
      {
        TipCount::Write2(ML_STAR.Tips_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR);
}

private function SaveWorklistAndMetadata(  ) void {
  private variable row_id;
  private variable well_id;
  private variable plasmid;
  private variable strain;
  private variable column_id;
  private file file1;
  private variable loopCounter2;
  private variable column_id_str;
  private variable inducer_conc;
  private variable OD;
  private variable OD_zero;
  private variable iniFilePath;
  private variable iniDir;
  private variable iniExists;
  private variable inducerUnits;
  private variable inducerId;
  file1.AddField("position", position, hslInteger);
  file1.AddField("well", well_id, hslString, 255);
  file1.AddField("row", row_id, hslString, 255);
  file1.AddField("column", column_id, hslInteger);
  file1.AddField("inducerId", inducerId, hslString, 255);
  file1.AddField(conc_str, inducer_conc, hslFloat);
  file1.AddField("inducerUnits", inducerUnits, hslString, 255);
  file1.AddField(strain_str, strain, hslString, 255);
  file1.AddField(plasmid_str, plasmid, hslString, 255);
  file1.AddField(OD_str, OD, hslFloat);
  file1.AddField(OD_zero_str, OD_zero, hslFloat);
  file1.AddField(pipette_volume_str, pipette_volume, hslFloat);
  file1.SetDelimiter(hslCSVDelimited);
  if( 0 == file1.Open(output_worklist_path, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, output_worklist_path, "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    while (
       (ML_STAR.Cytometry_Plate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.Cytometry_Plate, 1);
      loopCounter2 = loopCounter2 + 1;
      position = ML_STAR.Cytometry_Plate.GetCurrentPosition();
      well_id = SeqGetPositionId(ML_STAR.Cytometry_Plate);
      row_id = StrLeft(well_id, 1);
      column_id_str = StrMid(well_id, 1, 2);
      column_id = StrIVal(column_id_str);
      inducer_conc = SeqGetProperty(ML_STAR.Cytometry_Plate, position, conc_str);
      inducerId = SeqGetProperty(ML_STAR.Cytometry_Plate, position, Translate("inducerId"));
      inducerUnits = SeqGetProperty(ML_STAR.Cytometry_Plate, position, Translate("inducerUnits"));
      strain = SeqGetProperty(ML_STAR.Cytometry_Plate, position, strain_str);
      plasmid = SeqGetProperty(ML_STAR.Cytometry_Plate, position, plasmid_str);
      OD = SeqGetProperty(ML_STAR.Cytometry_Plate, position, OD_str);
      OD_zero = SeqGetProperty(ML_STAR.Cytometry_Plate, position, OD_zero_str);
      pipette_volume = SeqGetProperty(ML_STAR.Cytometry_Plate, position, pipette_volume_str);
      if( 0 == file1.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      SeqIncrement(ML_STAR.Cytometry_Plate, 1);
      if (
         (ML_STAR.Cytometry_Plate.GetCurrentPosition() > 0 && ML_STAR.Cytometry_Plate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.Cytometry_Plate.SetMax(ML_STAR.Cytometry_Plate.GetTotal());
    ML_STAR.Cytometry_Plate.SetCurrentPosition(1);
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  iniDir = HSLExtensions::File::GetDirectoryName(output_worklist_path);
  iniFilePath = iniDir + "\\schema.ini";
  iniExists = HSLExtensions::File::Exists(iniFilePath);
  if (iniExists == 1)
  {
    HSLExtensions::File::Delete(iniFilePath);
  }
}

private function GetParams(  ) void {
  private file file1;
  private variable param_dict;
  private variable loc;
  private variable loopCounter2;
  private variable read_line;
  private variable split_line[];
  private variable target_OD_str;
  private variable target_volume_str;
  private variable wavelength_str;
  private variable min_volume_str;
  private variable max_volume_str;
  private variable plate_number;
  private variable plate_num_str;
  param_dict = "param_dict";
  HSLExtensions::Dictionary::CreateDictionary(param_dict, 2);
  file1.AddField(1, read_line, hslString);
  file1.SetDelimiter(hslAsciiText);
  if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    while (
       (file1.Eof() == 0)
    )
    {
      loopCounter2 = loopCounter2 + 1;
      if( 0 == file1.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      loc = StrFind(read_line, ",");
      if (loc > 0)
      {
        split_line = HSLExtensions::String::Split(read_line, Translate(","), 1);
        HSLExtensions::Dictionary::AddItem(param_dict, split_line.ElementAt( 1 -1), split_line.ElementAt( 2 -1));
      }
    }
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  input_worklist_path = HSLExtensions::Dictionary::GetItem(param_dict, "inputWorklist");
  output_worklist_path = HSLExtensions::Dictionary::GetItem(param_dict, "outputWorklist");
  if(0){
    normalize_w_OD = HSLExtensions::Dictionary::GetItem(param_dict, "gen5");
    if (normalize_w_OD == "Yes")
    {
      gen5_file = HSLExtensions::Dictionary::GetItem(param_dict, "gen5File");
      target_OD_str = HSLExtensions::Dictionary::GetItem(param_dict, "targetOd");
      target_OD = StrFVal(target_OD_str);
    }
    wavelength_str = HSLExtensions::Dictionary::GetItem(param_dict, "wavelength");
    wavelength = StrIVal(wavelength_str);
    target_volume_str = HSLExtensions::Dictionary::GetItem(param_dict, "targetVolume");
    target_volume = StrFVal(target_volume_str);
  }
  target_volume = 20;
  wavelength = 600;
  normalize_w_OD = "No";
  antibiotic_id = HSLExtensions::Dictionary::GetItem(param_dict, "antibiotic");
  antibiotic_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, "bufferAntibioticConc");
  antibiotic_conc = StrFVal(antibiotic_conc_str);
  antibiotic_units = HSLExtensions::Dictionary::GetItem(param_dict, "bufferAntibioticUnits");
  if(0){
    min_volume = 5;
    max_volume = 100;
  }
  min_volume_str = HSLExtensions::Dictionary::GetItem(param_dict, "minVolume");
  min_volume = StrFVal(min_volume_str);
  max_volume_str = HSLExtensions::Dictionary::GetItem(param_dict, "maxVolume");
  max_volume = StrFVal(max_volume_str);
  plate_num_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("gradPlateNumber"));
  plate_number = StrIVal(plate_num_str);
  sequence_number = plate_number % 4;
  if (sequence_number == 0)
  {
    sequence_number = 4;
  }
}
