private function CleanUp(  ) void ;
private function GetParams(  ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function CleanUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  if(0){
    array_length=tip_counter_array.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < array_length;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (loopCounter1 == 1)
        {
          TipCount::Write2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
        }
        if (loopCounter1 == 2)
        {
          TipCount::Write2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
        }
        if (loopCounter1 == 3)
        {
          TipCount::Write2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
        }
        if (loopCounter1 == 4)
        {
          TipCount::Write2(ML_STAR.Tips_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
        }
      }
    }
  }
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR);
}

private function StartUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  if(0){
    TIP_HANDLING_WITH_96_HEAD::GetTipCounters(tip_counter_array, 1);
    tip_seq_arr.SetSize(0);
    tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Channels);
    tip_seq_arr.AddAsLast(ML_STAR.Tips_300_Channels);
    tip_seq_arr.AddAsLast(ML_STAR.Tips_50_Channels);
    tip_seq_arr.AddAsLast(ML_STAR.Tips_Offset_pickup);
    array_length=tip_counter_array.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < array_length;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (loopCounter1 == 1)
        {
          TipCount::Read2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
        }
        if (loopCounter1 == 2)
        {
          TipCount::Read2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
        }
        if (loopCounter1 == 3)
        {
          TipCount::Read2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
        }
        if (loopCounter1 == 4)
        {
          TipCount::Read2(ML_STAR.Tips_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
        }
      }
    }
  }
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
}

private function GetParams(  ) void {
  private variable param_dict;
  private variable loc;
  private variable read_line;
  private file file1;
  private variable split_line[];
  private variable inducer_conc_str;
  private variable loopCounter2;
  private variable culture_volume_str;
  private variable dilution_factor_str;
  param_dict = "param_dict";
  HSLExtensions::Dictionary::CreateDictionary(param_dict, 2);
  file1.AddField(1, read_line, hslString);
  file1.SetDelimiter(hslAsciiText);
  if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    while (
       (file1.Eof() == 0)
    )
    {
      loopCounter2 = loopCounter2 + 1;
      if( 0 == file1.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      loc = StrFind(read_line, ",");
      if (loc > 0)
      {
        split_line = HSLExtensions::String::Split(read_line, Translate(","), 1);
        HSLExtensions::Dictionary::AddItem(param_dict, split_line.ElementAt( 1 -1), split_line.ElementAt( 2 -1));
      }
    }
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  worklist_file_path = HSLExtensions::Dictionary::GetItem(param_dict, Translate("worklistFile"));
  strain_1_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("strain1"));
  plasmid_1_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("plasmid1"));
  inducer_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer"));
  inducer_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducerStockConc"));
  inducer_stock_concentration = StrFVal(inducer_conc_str);
  inducer_units = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducerStockUnits"));
  additive_left_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("leftAdditive"));
  left_add_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("leftAdditiveStockConc"));
  additive_left_concentration = StrFVal(left_add_conc_str);
  additive_left_units = HSLExtensions::Dictionary::GetItem(param_dict, Translate("leftAdditiveStockUnits"));
  additive_right_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("rightAdditive"));
  right_add_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("rightAdditiveStockConc"));
  additive_right_concentration = StrFVal(right_add_conc_str);
  additive_right_units = HSLExtensions::Dictionary::GetItem(param_dict, Translate("rightAdditiveStockUnits"));
  is_pipetting = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isPipetting"));
  is_debugging = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isDebugging"));
  culture_volume_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("cultureVolume"));
  culture_volume = StrFVal(culture_volume_str);
  if (culture_volume > 500)
  {
    culture_volume = 500;
  }
  else
  {
    if (culture_volume < 200)
    {
      culture_volume = 200;
    }
  }
  keep_old_plate = HSLExtensions::Dictionary::GetItem(param_dict, Translate("keepOldPlate"));
  dilution_factor_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("dilutionFactor"));
  dilution_factor = StrFVal(dilution_factor_str);
}
