 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLExtensions\\Sequence.hsl" }
#include "Double 2D gradient plate prep.res"
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
variable inducer_stock_concentration;
variable additive_left_concentration;
variable additive_right_concentration;
variable additive_left_units;
variable additive_left_id;
variable additive_right_id;
variable inducer_id;
variable inducer_units;
variable additive_right_units;
variable plasmid_1_id;
variable worklist_file_path;
variable strain_1_id;
variable strain_str;
variable ind_conc_str;
variable right_add_conc_str;
variable left_add_conc_str;
variable plasmid_str;
global device ML_STAR ("Double 2D gradient plate prep.lay", "ML_STAR", hslTrue);
sequence tip_seq_arr[];
variable tip_counter_array[];
variable sequence_number;
variable is_pipetting;
variable culture_volume;
variable pipette_volume;
variable pipette_multiplier;
variable mix_volume;
variable media_used;
variable next_media;
variable is_debugging;
dialog dialogHandle_1;
dialog dialogHandle_2;
dialog dialogHandle_3;
dialog dialogHandle_4;
dialog dialogHandle_5;
dialog dialogHandle_6;
dialog dialogHandle_7;
variable plate_number;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    private variable loopCounter2;
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    GetParams();
    StartUp();
    media_used = 0;
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.ABGene_plate_0002_lid, ML_STAR.Lid_parking_ABGene_plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_source_lid, ML_STAR.Lid_parking_Media_trough, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate and for inducer and chemical gradient dilutions\n=============================================================="));
    pipette_multiplier = culture_volume / (500 * 1.0);
    if (is_pipetting == "true")
    {
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", 0);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
      PTL::SetTipHandlingState("TipCountingIdentifier", "");
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupChannelVariable", "");
      PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
      if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_1000_Channels) )
      {
            PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
      if (plate_number == 1)
      {
        if(0){
          pipette_volume = pipette_multiplier * 700;
        }
        pipette_volume = pipette_multiplier * 720;
      }
      else
      {
        pipette_volume = pipette_multiplier * 800;
      }
      if (sequence_number == 1)
      {
        {
          sequence arrseqAspirate_8[];
          sequence arrseqDispense_8[];
          arrseqAspirate_8.SetSize(1);
          arrseqAspirate_8.SetAt(0, ML_STAR.Media_source);
          arrseqDispense_8.SetSize(1);
          arrseqDispense_8.SetAt(0, ML_STAR.IPTG_2x_1_1);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 0);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
          PTL::SetPipettingState("DispenseFluidHeight", 5);
          PTL::SetPipettingState("DispenseMode", 1);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_8, arrseqDispense_8, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, ML_STAR.IPTG_2x_1_1) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
      if (sequence_number == 2)
      {
        {
          sequence arrseqAspirate_9[];
          sequence arrseqDispense_9[];
          arrseqAspirate_9.SetSize(1);
          arrseqAspirate_9.SetAt(0, ML_STAR.Media_source);
          arrseqDispense_9.SetSize(1);
          arrseqDispense_9.SetAt(0, ML_STAR.IPTG_2x_1_2);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 0);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
          PTL::SetPipettingState("DispenseFluidHeight", 5);
          PTL::SetPipettingState("DispenseMode", 1);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_9, arrseqDispense_9, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, ML_STAR.IPTG_2x_1_2) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
      if (sequence_number == 3)
      {
        {
          sequence arrseqAspirate_10[];
          sequence arrseqDispense_10[];
          arrseqAspirate_10.SetSize(1);
          arrseqAspirate_10.SetAt(0, ML_STAR.Media_source);
          arrseqDispense_10.SetSize(1);
          arrseqDispense_10.SetAt(0, ML_STAR.IPTG_2x_1_3);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 0);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
          PTL::SetPipettingState("DispenseFluidHeight", 5);
          PTL::SetPipettingState("DispenseMode", 1);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_10, arrseqDispense_10, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, ML_STAR.IPTG_2x_1_3) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
      next_media = pipette_volume * 12;
      media_used = media_used + next_media;
      if (plate_number == 1)
      {
        if(0){
          pipette_volume = pipette_multiplier * 550;
        }
        pipette_volume = pipette_multiplier * 572;
      }
      else
      {
        pipette_volume = pipette_multiplier * 594;
      }
      if (sequence_number == 1)
      {
        {
          sequence arrseqAspirate_11[];
          sequence arrseqDispense_11[];
          arrseqAspirate_11.SetSize(1);
          arrseqAspirate_11.SetAt(0, ML_STAR.Media_source);
          arrseqDispense_11.SetSize(1);
          arrseqDispense_11.SetAt(0, ML_STAR.IPTG_2x_2_1);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 0);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
          PTL::SetPipettingState("DispenseFluidHeight", 5);
          PTL::SetPipettingState("DispenseMode", 1);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_11, arrseqDispense_11, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, ML_STAR.IPTG_2x_2_1) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
      if (sequence_number == 2)
      {
        {
          sequence arrseqAspirate_12[];
          sequence arrseqDispense_12[];
          arrseqAspirate_12.SetSize(1);
          arrseqAspirate_12.SetAt(0, ML_STAR.Media_source);
          arrseqDispense_12.SetSize(1);
          arrseqDispense_12.SetAt(0, ML_STAR.IPTG_2x_2_2);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 0);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
          PTL::SetPipettingState("DispenseFluidHeight", 5);
          PTL::SetPipettingState("DispenseMode", 1);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_12, arrseqDispense_12, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, ML_STAR.IPTG_2x_2_2) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
      if (sequence_number == 3)
      {
        {
          sequence arrseqAspirate_13[];
          sequence arrseqDispense_13[];
          arrseqAspirate_13.SetSize(1);
          arrseqAspirate_13.SetAt(0, ML_STAR.Media_source);
          arrseqDispense_13.SetSize(1);
          arrseqDispense_13.SetAt(0, ML_STAR.IPTG_2x_2_3);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 0);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
          PTL::SetPipettingState("DispenseFluidHeight", 5);
          PTL::SetPipettingState("DispenseMode", 1);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_13, arrseqDispense_13, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, ML_STAR.IPTG_2x_2_3) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
      next_media = pipette_volume * 2;
      media_used = media_used + next_media;
      if (plate_number == 1)
      {
        pipette_volume = pipette_multiplier * 427;
      }
      else
      {
        pipette_volume = pipette_multiplier * 439;
      }
      if (sequence_number == 1)
      {
        {
          sequence arrseqAspirate_14[];
          sequence arrseqDispense_14[];
          sequence seqMergedDispense_14;
          arrseqAspirate_14.SetSize(1);
          arrseqAspirate_14.SetAt(0, ML_STAR.Media_source);
          arrseqDispense_14.SetSize(2);
          arrseqDispense_14.SetAt(0, ML_STAR.Tet_2x_1);
          arrseqDispense_14.SetAt(1, ML_STAR.DOG_2x_1);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 0);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
          PTL::SetPipettingState("DispenseFluidHeight", 5);
          PTL::SetPipettingState("DispenseMode", 1);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_14, arrseqDispense_14, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, seqMergedDispense_14) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
      if (sequence_number == 2)
      {
        {
          sequence arrseqAspirate_15[];
          sequence arrseqDispense_15[];
          sequence seqMergedDispense_15;
          arrseqAspirate_15.SetSize(1);
          arrseqAspirate_15.SetAt(0, ML_STAR.Media_source);
          arrseqDispense_15.SetSize(2);
          arrseqDispense_15.SetAt(0, ML_STAR.Tet_2x_2);
          arrseqDispense_15.SetAt(1, ML_STAR.DOG_2x_2);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 0);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
          PTL::SetPipettingState("DispenseFluidHeight", 5);
          PTL::SetPipettingState("DispenseMode", 1);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_15, arrseqDispense_15, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, seqMergedDispense_15) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
      if (sequence_number == 3)
      {
        {
          sequence arrseqAspirate_16[];
          sequence arrseqDispense_16[];
          sequence seqMergedDispense_16;
          arrseqAspirate_16.SetSize(1);
          arrseqAspirate_16.SetAt(0, ML_STAR.Media_source);
          arrseqDispense_16.SetSize(2);
          arrseqDispense_16.SetAt(0, ML_STAR.Tet_2x_3);
          arrseqDispense_16.SetAt(1, ML_STAR.DOG_2x_3);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 0);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
          PTL::SetPipettingState("DispenseFluidHeight", 5);
          PTL::SetPipettingState("DispenseMode", 1);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_16, arrseqDispense_16, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, seqMergedDispense_16) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
      next_media = pipette_volume * 16;
      media_used = media_used + next_media;
      pipette_volume = culture_volume * 0.9;
      {
        sequence arrseqAspirate_17[];
        sequence arrseqDispense_17[];
        arrseqAspirate_17.SetSize(1);
        arrseqAspirate_17.SetAt(0, ML_STAR.Media_source);
        arrseqDispense_17.SetSize(1);
        arrseqDispense_17.SetAt(0, ML_STAR.Media_dispense);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 5);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 11);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseSubmergeDepth", 0);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
        PTL::SetPipettingState("DispenseFluidHeight", 5);
        PTL::SetPipettingState("DispenseMode", 1);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_17, arrseqDispense_17, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, ML_STAR.Media_dispense) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
      next_media = pipette_volume * 96;
      media_used = media_used + next_media;
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectChannelVariable", "");
      if( 0 == PTL::TipEject(ML_STAR) )
      {
            PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_1.SetOutput(Translate("media into growth plate"), "\n", Translate("media into Abgene plate"), "\n");
        dialogHandle_1.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Media_trough, ML_STAR.Media_source_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nDilute inducer (e.g. IPTG) stock into IPTG_2x wells\n=============================================================="));
    if (is_pipetting == "true")
    {
      if (sequence_number == 1)
      {
        if(0){
          pipette_volume = pipette_multiplier * 200;
        }
        pipette_volume = pipette_multiplier * 180;
        {
          sequence arrseqAspirate_18[];
          sequence arrseqDispense_18[];
          arrseqAspirate_18.SetSize(1);
          arrseqAspirate_18.SetAt(0, ML_STAR.IPTG_10x_stock);
          arrseqDispense_18.SetSize(1);
          arrseqDispense_18.SetAt(0, ML_STAR.IPTG_2x_1_1);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_300_Channels, arrseqAspirate_18, arrseqDispense_18, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.IPTG_10x_stock, ML_STAR.IPTG_2x_1_1) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
        if(0){
          pipette_volume = pipette_multiplier * 220;
        }
        pipette_volume = pipette_multiplier * 198;
        {
          sequence arrseqAspirate_19[];
          sequence arrseqDispense_19[];
          arrseqAspirate_19.SetSize(1);
          arrseqAspirate_19.SetAt(0, ML_STAR.IPTG_10x_stock);
          arrseqDispense_19.SetSize(1);
          arrseqDispense_19.SetAt(0, ML_STAR.IPTG_2x_2_1);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_300_Channels, arrseqAspirate_19, arrseqDispense_19, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.IPTG_10x_stock, ML_STAR.IPTG_2x_2_1) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
      if (sequence_number == 2)
      {
        pipette_volume = pipette_multiplier * 200;
        {
          sequence arrseqAspirate_20[];
          sequence arrseqDispense_20[];
          arrseqAspirate_20.SetSize(1);
          arrseqAspirate_20.SetAt(0, ML_STAR.IPTG_10x_stock);
          arrseqDispense_20.SetSize(1);
          arrseqDispense_20.SetAt(0, ML_STAR.IPTG_2x_1_2);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_300_Channels, arrseqAspirate_20, arrseqDispense_20, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.IPTG_10x_stock, ML_STAR.IPTG_2x_1_2) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
        pipette_volume = pipette_multiplier * 198;
        {
          sequence arrseqAspirate_21[];
          sequence arrseqDispense_21[];
          arrseqAspirate_21.SetSize(1);
          arrseqAspirate_21.SetAt(0, ML_STAR.IPTG_10x_stock);
          arrseqDispense_21.SetSize(1);
          arrseqDispense_21.SetAt(0, ML_STAR.IPTG_2x_2_2);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_300_Channels, arrseqAspirate_21, arrseqDispense_21, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.IPTG_10x_stock, ML_STAR.IPTG_2x_2_2) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
      if (sequence_number == 3)
      {
        pipette_volume = pipette_multiplier * 200;
        {
          sequence arrseqAspirate_22[];
          sequence arrseqDispense_22[];
          arrseqAspirate_22.SetSize(1);
          arrseqAspirate_22.SetAt(0, ML_STAR.IPTG_10x_stock);
          arrseqDispense_22.SetSize(1);
          arrseqDispense_22.SetAt(0, ML_STAR.IPTG_2x_1_3);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_300_Channels, arrseqAspirate_22, arrseqDispense_22, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.IPTG_10x_stock, ML_STAR.IPTG_2x_1_3) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
        pipette_volume = pipette_multiplier * 198;
        {
          sequence arrseqAspirate_23[];
          sequence arrseqDispense_23[];
          arrseqAspirate_23.SetSize(1);
          arrseqAspirate_23.SetAt(0, ML_STAR.IPTG_10x_stock);
          arrseqDispense_23.SetSize(1);
          arrseqDispense_23.SetAt(0, ML_STAR.IPTG_2x_2_3);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_300_Channels, arrseqAspirate_23, arrseqDispense_23, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.IPTG_10x_stock, ML_STAR.IPTG_2x_2_3) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_2.SetOutput(Translate("Reagent stock plate to Abgene plate"), "\n");
        dialogHandle_2.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    MECC::TraceComment(Translate("==============================================================\nDilute Chemical 1 (e.g. Tet) stock solution into Tet_2x wells\n=============================================================="));
    if (is_pipetting == "true")
    {
      if (sequence_number == 1)
      {
        pipette_volume = pipette_multiplier * 122;
        {
          sequence arrseqAspirate_24[];
          sequence arrseqDispense_24[];
          arrseqAspirate_24.SetSize(1);
          arrseqAspirate_24.SetAt(0, ML_STAR.Tet_10x_stock);
          arrseqDispense_24.SetSize(1);
          arrseqDispense_24.SetAt(0, ML_STAR.Tet_2x_1);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_300_Channels, arrseqAspirate_24, arrseqDispense_24, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Tet_10x_stock, ML_STAR.Tet_2x_1) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
        pipette_volume = pipette_multiplier * 220;
        {
          sequence arrseqAspirate_25[];
          sequence arrseqDispense_25[];
          arrseqAspirate_25.SetSize(1);
          arrseqAspirate_25.SetAt(0, ML_STAR.Tet_10x_stock);
          arrseqDispense_25.SetSize(1);
          arrseqDispense_25.SetAt(0, ML_STAR.IPTG_and_Tet_2x_1);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_300_Channels, arrseqAspirate_25, arrseqDispense_25, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Tet_10x_stock, ML_STAR.IPTG_and_Tet_2x_1) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
      if (sequence_number == 2)
      {
        pipette_volume = pipette_multiplier * 110;
        {
          sequence arrseqAspirate_26[];
          sequence arrseqDispense_26[];
          arrseqAspirate_26.SetSize(1);
          arrseqAspirate_26.SetAt(0, ML_STAR.Tet_10x_stock);
          arrseqDispense_26.SetSize(1);
          arrseqDispense_26.SetAt(0, ML_STAR.Tet_2x_2);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_300_Channels, arrseqAspirate_26, arrseqDispense_26, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Tet_10x_stock, ML_STAR.Tet_2x_2) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
        pipette_volume = pipette_multiplier * 198;
        {
          sequence arrseqAspirate_27[];
          sequence arrseqDispense_27[];
          arrseqAspirate_27.SetSize(1);
          arrseqAspirate_27.SetAt(0, ML_STAR.Tet_10x_stock);
          arrseqDispense_27.SetSize(1);
          arrseqDispense_27.SetAt(0, ML_STAR.IPTG_and_Tet_2x_2);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_300_Channels, arrseqAspirate_27, arrseqDispense_27, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Tet_10x_stock, ML_STAR.IPTG_and_Tet_2x_2) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
      if (sequence_number == 3)
      {
        pipette_volume = pipette_multiplier * 110;
        {
          sequence arrseqAspirate_28[];
          sequence arrseqDispense_28[];
          arrseqAspirate_28.SetSize(1);
          arrseqAspirate_28.SetAt(0, ML_STAR.Tet_10x_stock);
          arrseqDispense_28.SetSize(1);
          arrseqDispense_28.SetAt(0, ML_STAR.Tet_2x_3);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_300_Channels, arrseqAspirate_28, arrseqDispense_28, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Tet_10x_stock, ML_STAR.Tet_2x_3) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
        pipette_volume = pipette_multiplier * 198;
        {
          sequence arrseqAspirate_29[];
          sequence arrseqDispense_29[];
          arrseqAspirate_29.SetSize(1);
          arrseqAspirate_29.SetAt(0, ML_STAR.Tet_10x_stock);
          arrseqDispense_29.SetSize(1);
          arrseqDispense_29.SetAt(0, ML_STAR.IPTG_and_Tet_2x_3);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_300_Channels, arrseqAspirate_29, arrseqDispense_29, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Tet_10x_stock, ML_STAR.IPTG_and_Tet_2x_3) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_3.SetOutput(Translate("Reagent stock plate to Abgene plate"), "\n");
        dialogHandle_3.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    MECC::TraceComment(Translate("==============================================================\nDilute Chemical 2 (e.g. DOG) stock solution into DOG_2x wells\n=============================================================="));
    if (is_pipetting == "true")
    {
      if (sequence_number == 1)
      {
        pipette_volume = pipette_multiplier * 122;
        {
          sequence arrseqAspirate_30[];
          sequence arrseqDispense_30[];
          arrseqAspirate_30.SetSize(1);
          arrseqAspirate_30.SetAt(0, ML_STAR.DOG_10x_stock);
          arrseqDispense_30.SetSize(1);
          arrseqDispense_30.SetAt(0, ML_STAR.DOG_2x_1);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_300_Channels, arrseqAspirate_30, arrseqDispense_30, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.DOG_10x_stock, ML_STAR.DOG_2x_1) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
        pipette_volume = pipette_multiplier * 220;
        {
          sequence arrseqAspirate_31[];
          sequence arrseqDispense_31[];
          arrseqAspirate_31.SetSize(1);
          arrseqAspirate_31.SetAt(0, ML_STAR.DOG_10x_stock);
          arrseqDispense_31.SetSize(1);
          arrseqDispense_31.SetAt(0, ML_STAR.IPTG_and_DOG_2x_1);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_300_Channels, arrseqAspirate_31, arrseqDispense_31, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.DOG_10x_stock, ML_STAR.IPTG_and_DOG_2x_1) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
      if (sequence_number == 2)
      {
        pipette_volume = pipette_multiplier * 110;
        {
          sequence arrseqAspirate_32[];
          sequence arrseqDispense_32[];
          arrseqAspirate_32.SetSize(1);
          arrseqAspirate_32.SetAt(0, ML_STAR.DOG_10x_stock);
          arrseqDispense_32.SetSize(1);
          arrseqDispense_32.SetAt(0, ML_STAR.DOG_2x_2);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_300_Channels, arrseqAspirate_32, arrseqDispense_32, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.DOG_10x_stock, ML_STAR.DOG_2x_2) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
        pipette_volume = pipette_multiplier * 198;
        {
          sequence arrseqAspirate_33[];
          sequence arrseqDispense_33[];
          arrseqAspirate_33.SetSize(1);
          arrseqAspirate_33.SetAt(0, ML_STAR.DOG_10x_stock);
          arrseqDispense_33.SetSize(1);
          arrseqDispense_33.SetAt(0, ML_STAR.IPTG_and_DOG_2x_2);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_300_Channels, arrseqAspirate_33, arrseqDispense_33, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.DOG_10x_stock, ML_STAR.IPTG_and_DOG_2x_2) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
      if (sequence_number == 3)
      {
        pipette_volume = pipette_multiplier * 110;
        {
          sequence arrseqAspirate_34[];
          sequence arrseqDispense_34[];
          arrseqAspirate_34.SetSize(1);
          arrseqAspirate_34.SetAt(0, ML_STAR.DOG_10x_stock);
          arrseqDispense_34.SetSize(1);
          arrseqDispense_34.SetAt(0, ML_STAR.DOG_2x_3);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_300_Channels, arrseqAspirate_34, arrseqDispense_34, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.DOG_10x_stock, ML_STAR.DOG_2x_3) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
        pipette_volume = pipette_multiplier * 198;
        {
          sequence arrseqAspirate_35[];
          sequence arrseqDispense_35[];
          arrseqAspirate_35.SetSize(1);
          arrseqAspirate_35.SetAt(0, ML_STAR.DOG_10x_stock);
          arrseqDispense_35.SetSize(1);
          arrseqDispense_35.SetAt(0, ML_STAR.IPTG_and_DOG_2x_3);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_300_Channels, arrseqAspirate_35, arrseqDispense_35, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.DOG_10x_stock, ML_STAR.IPTG_and_DOG_2x_3) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_7.SetOutput(Translate("Reagent stock plate to Abgene plate"), "\n");
        dialogHandle_7.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Reagent_Stock, ML_STAR.Reagent_Stock_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nPipete inducer dilution gradient\n=============================================================="));
    if (is_pipetting == "true")
    {
      if (sequence_number == 1)
      {
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        pipette_volume = culture_volume * 0.9;
        mix_volume = pipette_multiplier * 800;
        {
          loopCounter2 = 0;
          while (
             (ML_STAR.IPTG_dilution_to_1_1.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, ML_STAR.IPTG_dilution_from_1_1, 1, ML_STAR.IPTG_dilution_to_1_1, 1);
            loopCounter2 = loopCounter2 + 1;
            ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
            ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
            if (
               (ML_STAR.IPTG_dilution_to_1_1.GetCurrentPosition() > 0 && ML_STAR.IPTG_dilution_to_1_1.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          ML_STAR.IPTG_dilution_from_1_1.SetMax(ML_STAR.IPTG_dilution_from_1_1.GetTotal());
          ML_STAR.IPTG_dilution_to_1_1.SetMax(ML_STAR.IPTG_dilution_to_1_1.GetTotal());
          ML_STAR.IPTG_dilution_from_1_1.SetCurrentPosition(1);
          ML_STAR.IPTG_dilution_to_1_1.SetCurrentPosition(1);
        }
        COMMON96HEADSUBMETHODS::Eject96HeadTips(ML_STAR);
        pipette_volume = pipette_multiplier * 549;
        {
          sequence arrseqAspirate_36[];
          sequence arrseqDispense_36[];
          arrseqAspirate_36.SetSize(1);
          arrseqAspirate_36.SetAt(0, ML_STAR.IPTG_dilution_from_2_1);
          arrseqDispense_36.SetSize(1);
          arrseqDispense_36.SetAt(0, ML_STAR.IPTG_dilution_to_2_1);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "11000000");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "11000000");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "11000000");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "11000000");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixVolume", 800);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "11000000");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_36, arrseqDispense_36, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.IPTG_dilution_from_2_1, ML_STAR.IPTG_dilution_to_2_1) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
      if (sequence_number == 2)
      {
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        pipette_volume = culture_volume * 0.9;
        mix_volume = pipette_multiplier * 800;
        {
          loopCounter2 = 0;
          while (
             (ML_STAR.IPTG_dilution_to_1_2.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, ML_STAR.IPTG_dilution_from_1_2, 1, ML_STAR.IPTG_dilution_to_1_2, 1);
            loopCounter2 = loopCounter2 + 1;
            ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
            ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
            if (
               (ML_STAR.IPTG_dilution_to_1_2.GetCurrentPosition() > 0 && ML_STAR.IPTG_dilution_to_1_2.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          ML_STAR.IPTG_dilution_from_1_2.SetMax(ML_STAR.IPTG_dilution_from_1_2.GetTotal());
          ML_STAR.IPTG_dilution_to_1_2.SetMax(ML_STAR.IPTG_dilution_to_1_2.GetTotal());
          ML_STAR.IPTG_dilution_from_1_2.SetCurrentPosition(1);
          ML_STAR.IPTG_dilution_to_1_2.SetCurrentPosition(1);
        }
        COMMON96HEADSUBMETHODS::Eject96HeadTips(ML_STAR);
        pipette_volume = pipette_multiplier * 549;
        {
          sequence arrseqAspirate_37[];
          sequence arrseqDispense_37[];
          arrseqAspirate_37.SetSize(1);
          arrseqAspirate_37.SetAt(0, ML_STAR.IPTG_dilution_from_2_2);
          arrseqDispense_37.SetSize(1);
          arrseqDispense_37.SetAt(0, ML_STAR.IPTG_dilution_to_2_2);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "11000000");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "11000000");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "11000000");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "11000000");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixVolume", 800);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "11000000");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_37, arrseqDispense_37, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.IPTG_dilution_from_2_2, ML_STAR.IPTG_dilution_to_2_2) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
      if (sequence_number == 3)
      {
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        pipette_volume = culture_volume * 0.9;
        mix_volume = pipette_multiplier * 800;
        {
          loopCounter2 = 0;
          while (
             (ML_STAR.IPTG_dilution_to_1_3.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, ML_STAR.IPTG_dilution_from_1_3, 1, ML_STAR.IPTG_dilution_to_1_3, 1);
            loopCounter2 = loopCounter2 + 1;
            ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
            ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
            if (
               (ML_STAR.IPTG_dilution_to_1_3.GetCurrentPosition() > 0 && ML_STAR.IPTG_dilution_to_1_3.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          ML_STAR.IPTG_dilution_from_1_3.SetMax(ML_STAR.IPTG_dilution_from_1_3.GetTotal());
          ML_STAR.IPTG_dilution_to_1_3.SetMax(ML_STAR.IPTG_dilution_to_1_3.GetTotal());
          ML_STAR.IPTG_dilution_from_1_3.SetCurrentPosition(1);
          ML_STAR.IPTG_dilution_to_1_3.SetCurrentPosition(1);
        }
        COMMON96HEADSUBMETHODS::Eject96HeadTips(ML_STAR);
        pipette_volume = pipette_multiplier * 549;
        {
          sequence arrseqAspirate_38[];
          sequence arrseqDispense_38[];
          arrseqAspirate_38.SetSize(1);
          arrseqAspirate_38.SetAt(0, ML_STAR.IPTG_dilution_from_2_3);
          arrseqDispense_38.SetSize(1);
          arrseqDispense_38.SetAt(0, ML_STAR.IPTG_dilution_to_2_3);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "11000000");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "11000000");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "11000000");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "11000000");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixVolume", 800);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "11000000");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_38, arrseqDispense_38, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.IPTG_dilution_from_2_3, ML_STAR.IPTG_dilution_to_2_3) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_4.SetOutput(Translate("Growth plate and Abgene plate"), "\n");
        dialogHandle_4.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    MECC::TraceComment(Translate("==============================================================\nPipete Chemical 1 (Tet) dilution gradient\n=============================================================="));
    if (is_pipetting == "true")
    {
      pipette_volume = culture_volume * 0.9;
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", 0);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
      PTL::SetTipHandlingState("TipCountingIdentifier", "");
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupChannelVariable", "");
      PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
      if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_1000_Channels) )
      {
            PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
      if (sequence_number == 1)
      {
        {
          sequence arrseqAspirate_39[];
          sequence arrseqDispense_39[];
          arrseqAspirate_39.SetSize(1);
          arrseqAspirate_39.SetAt(0, ML_STAR.Tet_dilution_from_1);
          arrseqDispense_39.SetSize(1);
          arrseqDispense_39.SetAt(0, ML_STAR.Tet_dilution_to_1);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixVolume", 800);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslTrue);
          PTL::SetPipettingState("DispenseSequenceReducible", hslTrue);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_39, arrseqDispense_39, 1, 1, pipette_volume, 0, 1, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Tet_dilution_from_1, ML_STAR.Tet_dilution_to_1) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
      if (sequence_number == 2)
      {
        {
          sequence arrseqAspirate_40[];
          sequence arrseqDispense_40[];
          arrseqAspirate_40.SetSize(1);
          arrseqAspirate_40.SetAt(0, ML_STAR.Tet_dilution_from_2);
          arrseqDispense_40.SetSize(1);
          arrseqDispense_40.SetAt(0, ML_STAR.Tet_dilution_to_2);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixVolume", 800);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslTrue);
          PTL::SetPipettingState("DispenseSequenceReducible", hslTrue);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_40, arrseqDispense_40, 1, 1, pipette_volume, 0, 1, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Tet_dilution_from_2, ML_STAR.Tet_dilution_to_2) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
      if (sequence_number == 3)
      {
        {
          sequence arrseqAspirate_41[];
          sequence arrseqDispense_41[];
          arrseqAspirate_41.SetSize(1);
          arrseqAspirate_41.SetAt(0, ML_STAR.Tet_dilution_from_3);
          arrseqDispense_41.SetSize(1);
          arrseqDispense_41.SetAt(0, ML_STAR.Tet_dilution_to_3);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixVolume", 800);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslTrue);
          PTL::SetPipettingState("DispenseSequenceReducible", hslTrue);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_41, arrseqDispense_41, 1, 1, pipette_volume, 0, 1, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Tet_dilution_from_3, ML_STAR.Tet_dilution_to_3) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectChannelVariable", "");
      if( 0 == PTL::TipEject(ML_STAR) )
      {
            PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_5.SetOutput(Translate("Growth plate and Abgene plate"), "\n");
        dialogHandle_5.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    MECC::TraceComment(Translate("==============================================================\nPipete Chemical 2 (DOG) dilution gradient\n=============================================================="));
    if (is_pipetting == "true")
    {
      pipette_volume = culture_volume * 0.9;
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", 0);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
      PTL::SetTipHandlingState("TipCountingIdentifier", "");
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupChannelVariable", "");
      PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
      if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_1000_Channels) )
      {
            PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
      if (sequence_number == 1)
      {
        {
          sequence arrseqAspirate_42[];
          sequence arrseqDispense_42[];
          arrseqAspirate_42.SetSize(1);
          arrseqAspirate_42.SetAt(0, ML_STAR.DOG_dilution_from_1);
          arrseqDispense_42.SetSize(1);
          arrseqDispense_42.SetAt(0, ML_STAR.DOG_dilution_to_1);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixVolume", 800);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslTrue);
          PTL::SetPipettingState("DispenseSequenceReducible", hslTrue);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_42, arrseqDispense_42, 1, 1, pipette_volume, 0, 1, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.DOG_dilution_from_1, ML_STAR.DOG_dilution_to_1) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
      if (sequence_number == 2)
      {
        {
          sequence arrseqAspirate_43[];
          sequence arrseqDispense_43[];
          arrseqAspirate_43.SetSize(1);
          arrseqAspirate_43.SetAt(0, ML_STAR.DOG_dilution_from_2);
          arrseqDispense_43.SetSize(1);
          arrseqDispense_43.SetAt(0, ML_STAR.DOG_dilution_to_2);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixVolume", 800);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslTrue);
          PTL::SetPipettingState("DispenseSequenceReducible", hslTrue);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_43, arrseqDispense_43, 1, 1, pipette_volume, 0, 1, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.DOG_dilution_from_2, ML_STAR.DOG_dilution_to_2) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
      if (sequence_number == 3)
      {
        {
          sequence arrseqAspirate_44[];
          sequence arrseqDispense_44[];
          arrseqAspirate_44.SetSize(1);
          arrseqAspirate_44.SetAt(0, ML_STAR.DOG_dilution_from_3);
          arrseqDispense_44.SetSize(1);
          arrseqDispense_44.SetAt(0, ML_STAR.DOG_dilution_to_3);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixVolume", 800);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslTrue);
          PTL::SetPipettingState("DispenseSequenceReducible", hslTrue);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_44, arrseqDispense_44, 1, 1, pipette_volume, 0, 1, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.DOG_dilution_from_3, ML_STAR.DOG_dilution_to_3) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectChannelVariable", "");
      if( 0 == PTL::TipEject(ML_STAR) )
      {
            PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_6.SetOutput(Translate("Growth plate and Abgene plate"), "\n");
        dialogHandle_6.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_ABGene_plate, ML_STAR.ABGene_plate_0002_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    TrcTrace(Translate("Media used:"), media_used);
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CalculateOutputs();
    SaveWorklistAndMetadata();
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
  } }
