 namespace _Method { #include "Common\\iSWAP-PlateAndLidMovement.hs_" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_Device_Controllers.hs_" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_TruSeqNano_Prep.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "STAR Tools\\STAR Tip Tools.hs_" }
#include "BarSeq prep.96 samples.res"
variable bln_Global_SimulatorMode;
variable str_Global_ODTCIPAddress;
variable ODTC;
variable odtc_script_path;
variable odtc_script_time;
variable odtc_script_id;
variable var_Global_HHSNode3;
variable HHS3;
variable SetTempHHS3;
variable loopCounter3;
variable loopCounter5;
variable loopCounter1;
variable loopCounter2;
variable is_debugging;
variable pcr_time;
variable pipetting_time;
variable wait_time;
timer timer1;
timer magnet_timer;
timer timer2;
timer timer3;
variable bln_Global_SkipAllTimers;
variable timer_2_min;
variable timer_5_min;
variable timer_3_min;
variable user_choice;
variable loopCounter4;
variable Bead_stock_volume;
variable Beads_used;
variable timer_10_sec;
variable timer_4_min;
variable time_lid_move;
timer lid_move_timer;
variable is_pipetting;
variable lacI_ratio_1_1;
variable lacI_ratio_1_2;
variable lacI_ratio_2;
variable lacI_str;
variable ratio_1_1_str;
variable ratio_1_2_str;
variable ratio_2_str;
variable is_running_ODTC;
variable use_manual_thermocycler;
variable use_ODTC;
dialog customDialog_1;
dialog customDialog_2;
dialog customDialog_3;
dialog customDialog_4;
variable timer_7_min;
variable timer_1_min;
variable flt_PCR1_ElutionVol;
variable flt_PCR1_CleanupVol;
variable flt_PCR2_RxVol;
variable flt_PCR2_ElutionVol;
variable is_pipetting_only;
variable flt_plasmid_volume;
variable flt_di_water_volume;
variable flt_test_plasmid_vol;
variable flt_primer_volume;
variable flt_primer_mix_vol;
variable flt_primer_test_vol;
variable flt_bead_ratio_1_1;
variable flt_post_PCR1_1_mix_vol;
variable flt_post_PCR1_1_sample_vol;
variable flt_post_PCR1_1_bead_vol;
variable flt_post_PCR1_1_samp_bead_vol;
variable flt_bead_ratio_1_2;
variable flt_post_PCR1_2_bead_vol;
variable flt_post_PCR1_2_mix_vol;
variable flt_post_PCR1_2_waste_vol;
variable flt_PCR2_MM_volume;
variable flt_PCR2_mix_vol;
variable flt_post_PCR2_sample_vol;
variable flt_bead_ratio_2;
variable flt_post_PCR2_bead_vol;
variable flt_post_PCR2_mix_vol;
variable flt_post_PCR2_waste_vol;
variable flt_final_sample_volume;
global device ML_STAR ("BarSeq prep.96 samples.lay", "ML_STAR", hslTrue);
global device HxFan ("BarSeq prep.96 samples.lay", "HxFan", hslTrue);
timer timer_for_elution;
sequence plasmid_input_arr[];
sequence pcr_plate_1_arr[];
variable int_time_point;
dialog customDialog_5;
variable str_load_plas;
variable str_time_point;
variable timer_30_sec;
dialog customDialog_6;
dialog customDialog_7;
dialog customDialog_8;
dialog customDialog_9;
dialog customDialog_10;
dialog customDialog_11;
dialog customDialog_12;
dialog customDialog_13;
dialog customDialog_14;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ISWAP_PLATEANDLIDMOVEMENT::_InitLibrary();
    NIST_DEVICE_CONTROLLERS::_InitLibrary();
    NIST_TRUSEQNANO_PREP::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    STAR_TIP_TOOLS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    bln_Global_SimulatorMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    is_pipetting_only = 0;
    is_debugging = "false";
    is_running_ODTC = "true";
    bln_Global_SkipAllTimers = 0;
    is_pipetting = "true";
    if (bln_Global_SimulatorMode == 1)
    {
      bln_Global_SkipAllTimers = 1;
    }
    if (is_pipetting != "true")
    {
      bln_Global_SkipAllTimers = 1;
      is_running_ODTC = "false";
    }
    if (is_pipetting_only == 1)
    {
      bln_Global_SkipAllTimers = 1;
      is_running_ODTC = "false";
    }
    if (bln_Global_SkipAllTimers == 1)
    {
      timer_1_min = 1;
      timer_2_min = 1;
      timer_3_min = 1;
      timer_4_min = 1;
      timer_5_min = 1;
      timer_7_min = 1;
      timer_10_sec = 1;
      timer_30_sec = 1;
    }
    else
    {
      timer_1_min = 60;
      timer_2_min = 120;
      timer_3_min = 180;
      timer_4_min = 240;
      timer_5_min = 300;
      timer_7_min = 420;
      timer_10_sec = 10;
      timer_30_sec = 30;
    }
    StartUp();
    flt_plasmid_volume = 35;
    flt_di_water_volume = 10;
    flt_test_plasmid_vol = 45;
    flt_primer_volume = 28.125;
    flt_primer_mix_vol = 70;
    flt_primer_test_vol = flt_primer_volume * 2;
    flt_post_PCR1_1_sample_vol = 90;
    flt_bead_ratio_1_1 = 0.6;
    flt_bead_ratio_1_1 = lacI_ratio_1_1;
    flt_post_PCR1_1_bead_vol = flt_bead_ratio_1_1 * flt_post_PCR1_1_sample_vol;
    flt_post_PCR1_1_mix_vol = flt_post_PCR1_1_sample_vol + flt_post_PCR1_1_bead_vol;
    flt_post_PCR1_1_mix_vol = flt_post_PCR1_1_mix_vol * 0.75;
    if (flt_post_PCR1_1_mix_vol > 300)
    {
      flt_post_PCR1_1_mix_vol = 300;
    }
    flt_post_PCR1_1_samp_bead_vol = flt_post_PCR1_1_sample_vol + flt_post_PCR1_1_bead_vol;
    flt_post_PCR1_1_samp_bead_vol = flt_post_PCR1_1_samp_bead_vol - 10;
    flt_bead_ratio_1_2 = 0.6;
    flt_bead_ratio_1_2 = lacI_ratio_1_2;
    flt_post_PCR1_2_bead_vol = flt_bead_ratio_1_2 * flt_post_PCR1_1_samp_bead_vol;
    flt_post_PCR1_2_mix_vol = flt_post_PCR1_1_samp_bead_vol + flt_post_PCR1_2_bead_vol;
    flt_post_PCR1_2_mix_vol = flt_post_PCR1_2_mix_vol * 0.9;
    if (flt_post_PCR1_2_mix_vol > 300)
    {
      flt_post_PCR1_2_mix_vol = 300;
    }
    flt_post_PCR1_2_waste_vol = flt_post_PCR1_1_samp_bead_vol + flt_post_PCR1_2_bead_vol;
    flt_post_PCR1_2_waste_vol = flt_post_PCR1_2_waste_vol - 5;
    flt_PCR1_ElutionVol = 55;
    flt_PCR1_CleanupVol = flt_PCR1_ElutionVol - 10;
    flt_PCR2_MM_volume = flt_PCR1_CleanupVol * 1.2;
    flt_PCR2_RxVol = flt_PCR1_CleanupVol * 2.2;
    flt_PCR2_mix_vol = flt_PCR2_RxVol * 0.7;
    flt_post_PCR2_sample_vol = flt_PCR2_RxVol - 10;
    flt_bead_ratio_2 = 1.0;
    flt_bead_ratio_2 = lacI_ratio_2;
    flt_post_PCR2_bead_vol = flt_bead_ratio_2 * flt_post_PCR2_sample_vol;
    flt_post_PCR2_mix_vol = flt_post_PCR2_sample_vol + flt_post_PCR2_bead_vol;
    flt_post_PCR2_mix_vol = flt_post_PCR2_mix_vol * 0.75;
    if (flt_post_PCR2_mix_vol > 300)
    {
      flt_post_PCR2_mix_vol = 300;
    }
    flt_post_PCR2_waste_vol = flt_post_PCR2_sample_vol + flt_post_PCR2_bead_vol;
    flt_post_PCR2_waste_vol = flt_post_PCR2_waste_vol - 5;
    flt_PCR2_ElutionVol = 50;
    flt_final_sample_volume = flt_PCR2_ElutionVol - 5;
    Bead_stock_volume = 25000;
    Beads_used = 0;
    Beads_used = Beads_used * 1.6;
    Trace ("Bead stock remaining:  ", Bead_stock_volume);
    if (is_pipetting == "true")
    {
      MECC::TraceComment(Translate("***************************************************************************\nPre-heat ODTC for 1st PCR \n***************************************************************************"));
      if (bln_Global_SimulatorMode == 0)
      {
        NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
        if (is_running_ODTC == "true")
        {
          odtc_script_path = "C:\\Program Files (x86)\\HAMILTON\\Methods\\GSF-IMS Project\\E. coli Methods\\Post-Selection PCR Prep\\PCR_Initialization.xml";
          NIST_DEVICE_CONTROLLERS::StartScriptODTC(ODTC, odtc_script_path, odtc_script_time, odtc_script_id);
        }
      }
    }
    MECC::TraceComment(Translate("=======================================================\nAdd samples to PCR_Plate_1 and dilute with 10 uL DI water\n======================================================="));
    MECC::TraceComment(Translate("***************************************************************************\nRemove lid from Reagent_Plate; comfort lid starts on PCR_plat_2, so it does not need to move\n***************************************************************************"));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Reagent_Plate_lid, ML_STAR.Reagent_plate_lid_parking, 1, 1, ML_STAR);
    if (is_pipetting == "true")
    {
      MECC::TraceComment(Translate("***************************************************************************\nAdd DI water to PCR_Plate_1\n***************************************************************************"));
      if (is_debugging == "true")
      {
        DebuggingPause();
      }
      MECC::TraceComment(Translate("****** DI water ******"));
      Transfer_ReagentsToPCR(ML_STAR.MlStar50ulTipWithFilter, ML_STAR.Restr_Enzyme, ML_STAR.PCR_Plate_1, flt_di_water_volume, 0, 0, 0, 0, 1, 0, 0, 1);
    }
    MECC::TraceComment(Translate("***************************************************************************\nReplace lid on Reagent_Plate\n***************************************************************************"));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Reagent_plate_lid_parking, ML_STAR.Reagent_Plate_lid, 1, 1, ML_STAR);
    if (is_pipetting == "true")
    {
      MECC::TraceComment(Translate("***************************************************************************\nAdd input plasmid DNA to PCR_Plate_1\n***************************************************************************"));
      if (is_debugging == "true")
      {
        DebuggingPause();
      }
      MECC::TraceComment(Translate("****** Plasmid Input DNA ******"));
      plasmid_input_arr.SetSize(0);
      plasmid_input_arr.AddAsLast(ML_STAR.Plasmid_Input_1);
      plasmid_input_arr.AddAsLast(ML_STAR.Plasmid_Input_2);
      plasmid_input_arr.AddAsLast(ML_STAR.Plasmid_Input_3);
      plasmid_input_arr.AddAsLast(ML_STAR.Plasmid_Input_4);
      pcr_plate_1_arr.SetSize(0);
      pcr_plate_1_arr.AddAsLast(ML_STAR.PCR_Plate_1_1);
      pcr_plate_1_arr.AddAsLast(ML_STAR.PCR_Plate_1_2);
      pcr_plate_1_arr.AddAsLast(ML_STAR.PCR_Plate_1_3);
      pcr_plate_1_arr.AddAsLast(ML_STAR.PCR_Plate_1_4);
      {
        for(int_time_point = 0; int_time_point < 4;)
        {
          int_time_point = int_time_point + 1;
          user_choice = 1;
          str_load_plas = Translate("Load the plasmid input plate for time point ");
          str_time_point = StrIStr(int_time_point);
          str_load_plas = StrConcat2(str_load_plas, str_time_point);
          str_load_plas = StrConcat2(str_load_plas, Translate(" as indicated (with NO LID), then click 'OK' to continue or 'Cancel' to abort the method."));
          customDialog_5.InitCustomDialog("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");
          customDialog_5.SetCustomDialogProperty( "textBlock.Text", str_load_plas );
          customDialog_5.ShowCustomDialog();
          user_choice = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
          if (user_choice == 2)
          {
            abort;
          }
          Transfer_ReagentsToPCR(ML_STAR.MlStar50ulTipWithFilter, plasmid_input_arr.ElementAt( int_time_point -1), pcr_plate_1_arr.ElementAt( int_time_point -1), flt_plasmid_volume, 0, 0, 0, 0, 0, 0, 2, 0);
        }
      }
      customDialog_6.InitCustomDialog("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");
      customDialog_6.ShowCustomDialog();
      user_choice = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
    }
    MECC::TraceComment(Translate("=======================================================\nFirst PCR Step\n======================================================="));
    MECC::TraceComment(Translate("***************************************************************************\nAdd Master mix with Primers to PCR_Plate_1\n***************************************************************************"));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (is_pipetting == "true")
    {
      MECC::TraceComment(Translate("***** R primers *****"));
      user_choice = 1;
      customDialog_12.InitCustomDialog("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");
      customDialog_12.ShowCustomDialog();
      user_choice = customDialog_12.GetCustomDialogProperty( "ReturnValue" );
      Transfer_ReagentsToPCR(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MM_w_R_primers, ML_STAR.PCR_Plate_1, flt_primer_volume, 0, 0, 0, 0, 0, 1, 0, 0);
      MECC::TraceComment(Translate("***** F primers *****"));
      user_choice = 1;
      customDialog_13.InitCustomDialog("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");
      customDialog_13.ShowCustomDialog();
      user_choice = customDialog_13.GetCustomDialogProperty( "ReturnValue" );
      Transfer_ReagentsToPCR(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MM_w_F_primers, ML_STAR.PCR_Plate_1, flt_primer_volume, 0, 0, 10, flt_primer_mix_vol, 0, 0, 0, 0);
      customDialog_14.InitCustomDialog("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");
      customDialog_14.ShowCustomDialog();
      user_choice = customDialog_14.GetCustomDialogProperty( "ReturnValue" );
    }
    MECC::TraceComment(Translate("***************************************************************************\nReplace lid on PCR_Plate_1 and Reagent_Plate\n***************************************************************************"));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (use_ODTC == 1)
    {
      ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_2_lid, ML_STAR.PCR_Plate_1_lid, 1, 0, ML_STAR);
      customDialog_7.InitCustomDialog("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");
      customDialog_7.ShowCustomDialog();
    }
    if (use_ODTC == 1)
    {
      MECC::TraceComment(Translate("***************************************************************************\nWait for ODTC lid pre-heating method, \nthen open ODTC, move PCR_Plate_1 to ODTC, close ODTC and run step 1 PCR method\n***************************************************************************"));
      if (is_debugging == "true")
      {
        DebuggingPause();
      }
      if (bln_Global_SimulatorMode == 0)
      {
        if (is_running_ODTC == "true")
        {
          NIST_DEVICE_CONTROLLERS::WaitForScriptODTC(ODTC, odtc_script_time, odtc_script_id);
        }
        NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
      }
      ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlateWithLid(ML_STAR.PCR_Plate_1_move, ML_STAR.PCR_Plate_1_lid, ML_STAR.PCR_Plate_ODTC_move, ML_STAR.PCR_Plate_ODTC_lid, 0, 0, ML_STAR);
      if (is_pipetting == "true")
      {
        if (bln_Global_SimulatorMode == 0)
        {
          NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
          if (is_running_ODTC == "true")
          {
            odtc_script_path = "C:\\Program Files (x86)\\HAMILTON\\Methods\\GSF-IMS Project\\E. coli Methods\\Post-Selection PCR Prep\\PCR_Step_1.xml";
            NIST_DEVICE_CONTROLLERS::StartScriptODTC(ODTC, odtc_script_path, odtc_script_time, odtc_script_id);
          }
        }
      }
    }
    else
    {
      customDialog_2.InitCustomDialog("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");
      customDialog_2.ShowCustomDialog();
    }
    pcr_time = 689;
    pipetting_time = 311;
    wait_time = pcr_time - pipetting_time;
    wait_time = 1;
    if (bln_Global_SkipAllTimers == 1)
    {
      wait_time = 1;
    }
    if( 0 == timer1.SetTimer(wait_time) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == timer1.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("***************************************************************************\nFirst PCR clean-up;\nAdd beads to Midi plate\nFinish PCR; Remove lid from PCR_Plate_1;\nbind plasmid DNA to the beads and keep the supernatant\n***************************************************************************"));
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
      HSLHamHeaterShaker::StartShaker(HHS3, 300);
    }
    MECC::TraceComment(Translate("***** Now shaking at RT for 10s ......."));
    if( 0 == timer3.SetTimer(5) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 5 sec shaking timer ****"));
    if( 0 == timer3.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::StopShaker(HHS3);
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
    }
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    TrcTrace4(Translate("************ Pipetting beads with ratio: "), flt_bead_ratio_1_1, Translate(" ******************"), Translate(""));
    Add_AmpureSingle(ML_STAR.Bead_Stock, ML_STAR.Midi_on_HHS_1, flt_post_PCR1_1_bead_vol, 0, 0, Translate("1_1"));
    if (use_ODTC == 1)
    {
      MECC::TraceComment(Translate("***************************************************************************\nWait for PCR method to finish, then move PCR plate from ODTC, and take lid off of PCR_Plate_1\n***************************************************************************"));
      if (is_debugging == "true")
      {
        DebuggingPause();
      }
      if (bln_Global_SimulatorMode == 0)
      {
        if (is_running_ODTC == "true")
        {
          NIST_DEVICE_CONTROLLERS::WaitForScriptODTC(ODTC, odtc_script_time, odtc_script_id);
        }
        NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
      }
      ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlateWithLid(ML_STAR.PCR_Plate_ODTC_move, ML_STAR.PCR_Plate_ODTC_lid, ML_STAR.PCR_Plate_1_move, ML_STAR.PCR_Plate_1_lid, 0, 0, ML_STAR);
      ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_1_lid, ML_STAR.PCR_Plate_2_lid, 1, 1, ML_STAR);
      customDialog_8.InitCustomDialog("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");
      customDialog_8.ShowCustomDialog();
      MECC::TraceComment(Translate("***************************************************************************\nClose ODTC, and run PCR pre-heat method on ODTC\n***************************************************************************"));
      if (is_debugging == "true")
      {
        DebuggingPause();
      }
      if (is_pipetting == "true")
      {
        if (bln_Global_SimulatorMode == 0)
        {
          NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
          if (is_running_ODTC == "true")
          {
            odtc_script_path = "C:\\Program Files (x86)\\HAMILTON\\Methods\\GSF-IMS Project\\E. coli Methods\\Post-Selection PCR Prep\\PCR_Initialization.xml";
            NIST_DEVICE_CONTROLLERS::StartScriptODTC(ODTC, odtc_script_path, odtc_script_time, odtc_script_id);
          }
        }
      }
    }
    else
    {
      customDialog_4.InitCustomDialog("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");
      customDialog_4.ShowCustomDialog();
    }
    MECC::TraceComment(Translate("=================================================\nShake Midi plate for ten seconds to resuspend beads;\nTransfer samples from PCR plate to Midi plate; \nMix by pipetting 10x;\nand incubate seven additional minutes without shaking\n================================================="));
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
      HSLHamHeaterShaker::StartShaker(HHS3, 1800);
    }
    MECC::TraceComment(Translate("***** Now shaking at RT for 10s ......."));
    if( 0 == timer3.SetTimer(timer_10_sec) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 10 sec shaking timer ****"));
    if( 0 == timer3.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::StopShaker(HHS3);
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
    }
    if (is_pipetting == "true")
    {
      Transfer_PCRtoMidi(ML_STAR.PCR_Plate_1, ML_STAR.Midi_on_HHS_1, flt_post_PCR1_1_sample_vol, flt_post_PCR1_1_mix_vol);
    }
    MECC::TraceComment(Translate("***** Now incubating at RT for 7 min ......."));
    if( 0 == timer2.SetTimer(timer_7_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 7 minute timer for RT incubation ****"));
    if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    MECC::TraceComment(Translate("***** Incubation finished..."));
    MECC::TraceComment(Translate("=======================================================\nMove Midi plate to magnet, incubate 4 minutes, get new Midi plate from stack\nthen transfer supernatant to new Midi plate on HHS\n======================================================="));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("**** on magnet..."));
    if( 0 == magnet_timer.SetTimer(timer_4_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.ABGENE_MIDI_stack_0002, ML_STAR.Midi_on_HHS, 1, 1, ML_STAR);
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
    }
    MECC::TraceComment(Translate("**** 4 minute timer for magnet ****"));
    if( 0 == magnet_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** done."));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (is_pipetting == "true")
    {
      Transfer_FromMidiOnMagnet(ML_STAR.Midi_on_magnet_1, ML_STAR.Midi_on_HHS_2, flt_post_PCR1_1_samp_bead_vol, 0, 1);
    }
    MECC::TraceComment(Translate("=====================================================================\nNext step: bind PCR product to beads and discard the supernatant\n====================================================================="));
    TrcTrace4(Translate("************ Pipetting beads with ratio: "), flt_bead_ratio_1_2, Translate(" ******************"), Translate(""));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    Add_AmpureSingle(ML_STAR.Bead_Stock, ML_STAR.Midi_on_HHS_3, flt_post_PCR1_2_bead_vol, 1, flt_post_PCR1_2_mix_vol, Translate("1_2"));
    MECC::TraceComment(Translate("***** Now incubating at RT for 7 min ......."));
    if( 0 == timer2.SetTimer(timer_7_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_magnet, ML_STAR.MIDI_Waste, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("**** 7 minute timer for RT incubation ****"));
    if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("***** Incubation finished..."));
    MECC::TraceComment(Translate("=======================================================\nMove Midi plate to magnet, incubate 5 minutes,\nthen discard the supernatant\n======================================================="));
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("**** on magnet..."));
    if( 0 == magnet_timer.SetTimer(timer_5_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 5 minute timer for magnet ****"));
    if( 0 == magnet_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** done."));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (is_pipetting == "true")
    {
      Transfer_PlatetoWaste(ML_STAR.Midi_on_magnet_2, flt_post_PCR1_2_waste_vol, Translate("Nano_SVF_EthanolWaste_JetEmpty_HigherAirTransport"));
    }
    MECC::TraceComment(Translate("===============================================================================\nEthanol rinse (1x), then resuspend sample in elution buffer, put plate on magnet, and wait 5 minutes\n==============================================================================="));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    EthanolStep(ML_STAR.Midi_on_magnet_2, ML_STAR.Ethanol_80_1, flt_PCR1_ElutionVol, ML_STAR.DI_Water, ML_STAR.Midi_on_HHS_3);
    if( 0 == timer_for_elution.SetTimer(timer_3_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    User_add_300_tips();
    MECC::TraceComment(Translate("**** 3 minute timer ****"));
    if( 0 == timer_for_elution.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("==================================================================================================================================\nRemove lid from Reagent_Plate and Move midi to Magnet\n=================================================================================================================================="));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Reagent_Plate_lid, ML_STAR.Reagent_plate_lid_parking, 0, 1, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("***************************************************************************\nRemove lid from PCR_Plate_2; and prep plate for Second PCR\nThe master-mix pipetting should take about 8 minute for 96 samples. \n    So, that will set the time that the Midi plate sits onthe maget base for this step\n***************************************************************************"));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (use_ODTC == 1)
    {
      ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_2_lid, ML_STAR.PCR_Plate_1_lid, 1, 1, ML_STAR);
      customDialog_9.InitCustomDialog("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");
      customDialog_9.ShowCustomDialog();
    }
    MECC::TraceComment(Translate("**** Prep PCR plate 2 ***"));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (is_pipetting == "true")
    {
      Transfer_ReagentsToPCR(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.PCR_Mix_Second_96, ML_STAR.PCR_Plate_2, flt_PCR2_MM_volume, 0, 0, 0, 0, 1, 0, 0, 0);
    }
    MECC::TraceComment(Translate("****************************************************************************************\nPipette supernatant from Midi plate to PCR_Plate_2\n****************************************************************************************"));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (is_pipetting == "true")
    {
      Transfer_FromMidiOnMagnet(ML_STAR.Midi_on_magnet_3, ML_STAR.PCR_Plate_2, flt_PCR1_CleanupVol, flt_PCR2_mix_vol, 0);
    }
    MECC::TraceComment(Translate("***************************************************************************\nReplace lid on PCR_Plate_2;\nthrow Midi plate to waste; \nput lid back on reagent plate; \nthrow PCR plate 1 to waste;\nthen move new midi plate to HHS (from stack)\n***************************************************************************"));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (use_ODTC == 1)
    {
      ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_1_lid, ML_STAR.PCR_Plate_2_lid, 1, 1, ML_STAR);
      customDialog_10.InitCustomDialog("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");
      customDialog_10.ShowCustomDialog();
    }
    if (use_ODTC == 1)
    {
      MECC::TraceComment(Translate("***************************************************************************\nWait for ODTC lid pre-heating method, \nthen open ODTC, move PCR_Plate_2 to ODTC, close ODTC and run step 2 PCR method\n***************************************************************************"));
      if (is_debugging == "true")
      {
        DebuggingPause();
      }
      if (bln_Global_SimulatorMode == 0)
      {
        if (is_running_ODTC == "true")
        {
          NIST_DEVICE_CONTROLLERS::WaitForScriptODTC(ODTC, odtc_script_time, odtc_script_id);
        }
        NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
      }
      ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlateWithLid(ML_STAR.PCR_Plate_2_move, ML_STAR.PCR_Plate_2_lid, ML_STAR.PCR_Plate_ODTC_move, ML_STAR.PCR_Plate_ODTC_lid, 0, 0, ML_STAR);
      if (is_pipetting == "true")
      {
        if (bln_Global_SimulatorMode == 0)
        {
          NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
          if (is_running_ODTC == "true")
          {
            odtc_script_path = "C:\\Program Files (x86)\\HAMILTON\\Methods\\GSF-IMS Project\\E. coli Methods\\Post-Selection PCR Prep\\PCR_Step_2.xml";
            NIST_DEVICE_CONTROLLERS::StartScriptODTC(ODTC, odtc_script_path, odtc_script_time, odtc_script_id);
          }
        }
      }
    }
    else
    {
      customDialog_1.InitCustomDialog("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");
      customDialog_1.ShowCustomDialog();
    }
    MECC::TraceComment(Translate("***************************************************************************\nWhile 2nd PCR is running:\nthrow Midi plate to waste; \nput lid back on reagent plate; \nmove new midi plate to HHS (from stack);\nand move BarSeq_Output_Plate to pipetting position.\n***************************************************************************"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_magnet, ML_STAR.MIDI_Waste, 0, 1, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Reagent_plate_lid_parking, ML_STAR.Reagent_Plate_lid, 0, 1, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlate(ML_STAR.PCR_Plate_1_move, ML_STAR.PCR_Plate_waste, 0, 1, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.ABGENE_MIDI_stack_0001, ML_STAR.Midi_on_HHS, 1, 1, ML_STAR);
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveEppendorf350uLElutionPlateWithLid(ML_STAR.Output_Plate_Parking, ML_STAR.Output_Plate_Parking_lid, ML_STAR.BarSeq_Output_Plate_move, ML_STAR.BarSeq_Output_Plate_lid, 1, 1, ML_STAR);
    pcr_time = 1480;
    pipetting_time = 870;
    wait_time = pcr_time - pipetting_time;
    if (bln_Global_SkipAllTimers == 1)
    {
      wait_time = 1;
    }
    if( 0 == timer1.SetTimer(wait_time) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("***************************************************************************\nSecond PCR clean-up;\nAdd beads to Midi plate on HHS\nFinish PCR; Remove lid from PCR_Plate;\nbind PCR product to the beads and discard the supernatant\n***************************************************************************"));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    TrcTrace4(Translate("************ Pipetting beads with ratio: "), flt_bead_ratio_2, Translate(" ******************"), Translate(""));
    MECC::TraceComment(Translate("**** timer waiting for second PCR ****"));
    if( 0 == timer1.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    Add_AmpureSingle(ML_STAR.Bead_Stock, ML_STAR.Midi_on_HHS_4, flt_post_PCR2_bead_vol, 0, 0, Translate("2"));
    if (use_ODTC == 1)
    {
      MECC::TraceComment(Translate("***************************************************************************\nWait for PCR method to finish, then move PCR_Plate_2 from ODTC, and take lid off of PCR_Plate_2\n***************************************************************************"));
      if (is_debugging == "true")
      {
        DebuggingPause();
      }
      if (bln_Global_SimulatorMode == 0)
      {
        if (is_running_ODTC == "true")
        {
          NIST_DEVICE_CONTROLLERS::WaitForScriptODTC(ODTC, odtc_script_time, odtc_script_id);
        }
        NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
      }
      ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlateWithLid(ML_STAR.PCR_Plate_ODTC_move, ML_STAR.PCR_Plate_ODTC_lid, ML_STAR.PCR_Plate_2_move, ML_STAR.PCR_Plate_2_lid, 0, 0, ML_STAR);
      ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_2_lid, ML_STAR.PCR_Lid_waste, 1, 1, ML_STAR);
      customDialog_11.InitCustomDialog("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");
      customDialog_11.ShowCustomDialog();
      MECC::TraceComment(Translate("***************************************************************************\nClose ODTC\n***************************************************************************"));
      if (is_debugging == "true")
      {
        DebuggingPause();
      }
      if (is_pipetting == "true")
      {
        if (bln_Global_SimulatorMode == 0)
        {
          NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
        }
      }
    }
    else
    {
      customDialog_3.InitCustomDialog("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");
      customDialog_3.ShowCustomDialog();
    }
    MECC::TraceComment(Translate("=================================================\nShake midi plate for 10 seconds to resuspend beads;\nTransfer samples from PCR plate to Midi plate;\nMix by pipetting 10x;\nand incubate 5 additional minutes without shaking\n================================================="));
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
      HSLHamHeaterShaker::StartShaker(HHS3, 1800);
    }
    MECC::TraceComment(Translate("***** Now shaking at RT for 10s ......."));
    if( 0 == timer3.SetTimer(timer_10_sec) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 10 sec shaking timer ****"));
    if( 0 == timer3.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::StopShaker(HHS3);
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
    }
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (is_pipetting == "true")
    {
      Transfer_PCRtoMidi(ML_STAR.PCR_Plate_2, ML_STAR.Midi_on_HHS_4, flt_post_PCR2_sample_vol, flt_post_PCR2_mix_vol);
    }
    MECC::TraceComment(Translate("***** Now incubating at RT for 7 min ......."));
    if( 0 == timer2.SetTimer(timer_7_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 7 minute timer for RT incubation ****"));
    if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("***** Incubation finished..."));
    MECC::TraceComment(Translate("=======================================================\nMove Midi plate to magnet, incubate 5 minutes,\nthen discard supernatant;\n======================================================="));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("**** on magnet..."));
    if( 0 == magnet_timer.SetTimer(timer_5_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 5 minute timer for magnet ****"));
    if( 0 == magnet_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** done."));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (is_pipetting == "true")
    {
      Transfer_PlatetoWaste(ML_STAR.Midi_on_magnet_4, flt_post_PCR2_waste_vol, Translate("Nano_SVF_EthanolWaste_JetEmpty_HigherAirTransport"));
    }
    MECC::TraceComment(Translate("===============================================================================\nEthanol rinse (1x), then resuspend sample in elution buffer, put plate on magnet, and wait 5 minutes\n==============================================================================="));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    EthanolStep(ML_STAR.Midi_on_magnet_4, ML_STAR.Ethanol_80_2, flt_PCR2_ElutionVol, ML_STAR.Elution_Buffer, ML_STAR.Midi_on_HHS_4);
    if( 0 == timer_for_elution.SetTimer(timer_3_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 3 minute timer ****"));
    if( 0 == timer_for_elution.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("==================================================================================================================================\nMove to Magnet\n=================================================================================================================================="));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 1, 1, ML_STAR);
    if( 0 == magnet_timer.SetTimer(timer_5_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    time_lid_move = timer_5_min - 30;
    if (time_lid_move < 2)
    {
      time_lid_move = 2;
    }
    if( 0 == lid_move_timer.SetTimer(time_lid_move) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == lid_move_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("***************************************************************************\nRemove lid from Output_Plate\n***************************************************************************"));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.BarSeq_Output_Plate_lid, ML_STAR.Output_Plate_Lid_Parking, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================================\nWait for 5 minute magnet timer to finish, then pipette supernatant from Midi plate to new Pooling plate\n=============================================================================="));
    MECC::TraceComment(Translate("**** 5 minute timer for magnet ****"));
    if( 0 == magnet_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (is_pipetting == "true")
    {
      MECC::TraceComment(Translate("***************************************************************************\nTransfer Cleaned up PCR samples into Output_Plate\n***************************************************************************"));
      if (is_debugging == "true")
      {
        DebuggingPause();
      }
      Transfer_FromMidiOnMagnet(ML_STAR.Midi_on_magnet_4, ML_STAR.BarSeq_Output_Plate, flt_final_sample_volume, 0, 1);
    }
    MECC::TraceComment(Translate("***************************************************************************\nReplace lid on Output_Plate\n***************************************************************************"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Output_Plate_Lid_Parking, ML_STAR.BarSeq_Output_Plate_lid, 1, 1, ML_STAR);
    CleanUp();
    ISWAP_PLATEANDLIDMOVEMENT::_ExitLibrary();
    NIST_DEVICE_CONTROLLERS::_ExitLibrary();
    NIST_TRUSEQNANO_PREP::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    STAR_TIP_TOOLS::_ExitLibrary();
  } }
