 namespace _Method { #include "Common\\iSWAP-PlateAndLidMovement.hs_" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_Device_Controllers.hs_" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_TruSeqNano_Prep.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "STAR Tools\\STAR Tip Tools.hs_" }
#include "Post-Selection PCR and clean-up.24 samples.res"
variable bln_Global_SimulatorMode;
variable str_Global_ODTCIPAddress;
variable ODTC;
variable odtc_script_path;
variable odtc_script_time;
variable odtc_script_id;
variable var_Global_HHSNode3;
variable HHS3;
variable SetTempHHS3;
variable loopCounter3;
variable loopCounter5;
variable loopCounter1;
variable loopCounter2;
variable is_debugging;
global device ML_STAR ("Post-Selection PCR and clean-up.24 samples.lay", "ML_STAR", hslTrue);
global device HxFan ("Post-Selection PCR and clean-up.24 samples.lay", "HxFan", hslTrue);
sequence Sample_Plate_arr[];
sequence Sample_Plate;
variable pcr_time;
variable pipetting_time;
variable wait_time;
timer timer1;
timer magnet_timer;
timer timer2;
timer timer3;
variable time_point;
variable bln_Global_SkipAllTimers;
variable timer_2_min;
variable timer_5_min;
variable timer_3_min;
variable user_choice;
variable loopCounter4;
variable Bead_stock_volume;
variable Beads_used;
variable timer_10_sec;
variable timer_4_min;
sequence No_pooling_arr[];
sequence No_pooling_to;
variable time_lid_move;
timer lid_move_timer;
variable is_pipetting;
variable z_shift;
variable PCR_plate_stack_height;
sequence PCR_stack_arr[];
sequence PCR_stack_get;
variable is_ramR_experiment;
variable is_lacI_experiment;
variable is_bead_ratio_test_exp;
variable lacI_ratio_1_1;
variable ramR_ratio_1_1;
variable lacI_ratio_1_2;
variable ramR_ratio_1_2;
variable lacI_ratio_2;
variable ramR_ratio_2;
variable lacI_str;
variable ratio_1_1_str;
variable ratio_1_2_str;
variable ratio_2_str;
variable ramR_str;
variable confirm_str;
variable time_point_str;
variable bead_ratio_test_arr_1_2[];
variable bead_ratio_test_arr_2[];
variable loopCounter7;
sequence MM_w_Rev_Primer_arr[];
sequence MM_w_Rev_Primer;
variable is_running_ODTC;
variable use_manual_thermocycler;
variable use_ODTC;
sequence asp_seq;
dialog customDialog_1;
dialog customDialog_2;
dialog customDialog_3;
dialog customDialog_4;
variable is_primer_test;
variable timer_7_min;
variable timer_1_min;
variable flt_PCR1_ElutionVol;
variable flt_PCR1_CleanupVol;
variable flt_PCR2_RxVol;
variable flt_PCR2_ElutionVol;
variable is_pipetting_only;
variable flt_plasmid_volume;
variable flt_di_water_volume;
variable flt_test_plasmid_vol;
variable flt_di_water_mix_vol;
variable flt_primer_volume;
variable flt_primer_mix_vol;
variable flt_primer_test_vol;
variable flt_bead_ratio_1_1;
variable flt_post_PCR1_1_mix_vol;
variable flt_post_PCR1_1_sample_vol;
variable flt_post_PCR1_1_bead_vol;
variable flt_post_PCR1_1_samp_bead_vol;
variable flt_bead_ratio_1_2;
variable flt_post_PCR1_2_bead_vol;
variable flt_post_PCR1_2_mix_vol;
variable flt_post_PCR1_2_waste_vol;
variable flt_PCR2_MM_volume;
variable flt_PCR2_mix_vol;
variable flt_post_PCR2_sample_vol;
variable flt_bead_ratio_2;
variable flt_post_PCR2_bead_vol;
variable flt_post_PCR2_mix_vol;
variable flt_post_PCR2_waste_vol;
variable flt_final_sample_volume;
variable bead_volume_arr_1_2[];
variable sample_mix_vol_arr_1_2[];
variable bead_volume_arr_2[];
variable sample_mix_vol_arr_2[];
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ISWAP_PLATEANDLIDMOVEMENT::_InitLibrary();
    NIST_DEVICE_CONTROLLERS::_InitLibrary();
    NIST_TRUSEQNANO_PREP::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    STAR_TIP_TOOLS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    bln_Global_SimulatorMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    is_pipetting_only = 0;
    is_debugging = "false";
    is_running_ODTC = "true";
    bln_Global_SkipAllTimers = 0;
    is_pipetting = "true";
    if (bln_Global_SimulatorMode == 1)
    {
      bln_Global_SkipAllTimers = 1;
    }
    if (is_pipetting_only == 1)
    {
      bln_Global_SkipAllTimers = 1;
      is_running_ODTC = "false";
    }
    if (bln_Global_SkipAllTimers == 1)
    {
      timer_1_min = 1;
      timer_2_min = 1;
      timer_3_min = 1;
      timer_4_min = 1;
      timer_5_min = 1;
      timer_7_min = 1;
      timer_10_sec = 1;
    }
    else
    {
      timer_1_min = 60;
      timer_2_min = 120;
      timer_3_min = 180;
      timer_4_min = 240;
      timer_5_min = 300;
      timer_7_min = 420;
      timer_10_sec = 10;
    }
    StartUp();
    flt_plasmid_volume = 35;
    flt_di_water_volume = 10;
    flt_di_water_mix_vol = 35;
    flt_test_plasmid_vol = 45;
    flt_primer_volume = 28.125;
    flt_primer_mix_vol = 70;
    flt_primer_test_vol = flt_primer_volume * 2;
    flt_post_PCR1_1_sample_vol = 90;
    flt_bead_ratio_1_1 = 0.6;
    if (is_lacI_experiment == 1)
    {
      flt_bead_ratio_1_1 = lacI_ratio_1_1;
    }
    if (is_ramR_experiment == 1)
    {
      flt_bead_ratio_1_1 = ramR_ratio_1_1;
    }
    if (is_bead_ratio_test_exp == 1)
    {
      flt_bead_ratio_1_1 = 0.6;
    }
    flt_post_PCR1_1_bead_vol = flt_bead_ratio_1_1 * flt_post_PCR1_1_sample_vol;
    flt_post_PCR1_1_mix_vol = flt_post_PCR1_1_sample_vol + flt_post_PCR1_1_bead_vol;
    flt_post_PCR1_1_mix_vol = flt_post_PCR1_1_mix_vol * 0.75;
    if (flt_post_PCR1_1_mix_vol > 300)
    {
      flt_post_PCR1_1_mix_vol = 300;
    }
    flt_post_PCR1_1_samp_bead_vol = flt_post_PCR1_1_sample_vol + flt_post_PCR1_1_bead_vol;
    flt_post_PCR1_1_samp_bead_vol = flt_post_PCR1_1_samp_bead_vol - 10;
    flt_bead_ratio_1_2 = 0.6;
    if (is_lacI_experiment == 1)
    {
      flt_bead_ratio_1_2 = lacI_ratio_1_2;
    }
    if (is_ramR_experiment == 1)
    {
      flt_bead_ratio_1_2 = ramR_ratio_1_2;
    }
    if (is_bead_ratio_test_exp == 1)
    {
      bead_volume_arr_1_2.SetSize(0);
      sample_mix_vol_arr_1_2.SetSize(0);
      {
        for(loopCounter7 = 0; loopCounter7 < 3;)
        {
          loopCounter7 = loopCounter7 + 1;
          flt_bead_ratio_1_2 = bead_ratio_test_arr_1_2.ElementAt( loopCounter7 -1);
          flt_post_PCR1_2_bead_vol = flt_bead_ratio_1_2 * flt_post_PCR1_1_samp_bead_vol;
          flt_post_PCR1_2_mix_vol = flt_post_PCR1_1_samp_bead_vol + flt_post_PCR1_2_bead_vol;
          flt_post_PCR1_2_mix_vol = flt_post_PCR1_2_mix_vol * 0.9;
          if (flt_post_PCR1_2_mix_vol > 300)
          {
            flt_post_PCR1_2_mix_vol = 300;
          }
          bead_volume_arr_1_2.AddAsLast(flt_post_PCR1_2_bead_vol);
          sample_mix_vol_arr_1_2.AddAsLast(flt_post_PCR1_2_mix_vol);
        }
      }
    }
    else
    {
      flt_post_PCR1_2_bead_vol = flt_bead_ratio_1_2 * flt_post_PCR1_1_samp_bead_vol;
      flt_post_PCR1_2_mix_vol = flt_post_PCR1_1_samp_bead_vol + flt_post_PCR1_2_bead_vol;
      flt_post_PCR1_2_mix_vol = flt_post_PCR1_2_mix_vol * 0.9;
      if (flt_post_PCR1_2_mix_vol > 300)
      {
        flt_post_PCR1_2_mix_vol = 300;
      }
    }
    flt_post_PCR1_2_waste_vol = flt_post_PCR1_1_samp_bead_vol + flt_post_PCR1_2_bead_vol;
    flt_post_PCR1_2_waste_vol = flt_post_PCR1_2_waste_vol - 5;
    flt_PCR1_ElutionVol = 55;
    flt_PCR1_CleanupVol = flt_PCR1_ElutionVol - 10;
    flt_PCR2_MM_volume = flt_PCR1_CleanupVol * 1.2;
    flt_PCR2_RxVol = flt_PCR1_CleanupVol * 2.2;
    flt_PCR2_mix_vol = flt_PCR2_RxVol * 0.7;
    flt_post_PCR2_sample_vol = flt_PCR2_RxVol - 10;
    flt_bead_ratio_2 = 1.0;
    if (is_lacI_experiment == 1)
    {
      flt_bead_ratio_2 = lacI_ratio_2;
    }
    if (is_ramR_experiment == 1)
    {
      flt_bead_ratio_2 = ramR_ratio_2;
    }
    if (is_bead_ratio_test_exp == 1)
    {
      bead_volume_arr_2.SetSize(0);
      sample_mix_vol_arr_2.SetSize(0);
      {
        for(loopCounter7 = 0; loopCounter7 < 4;)
        {
          loopCounter7 = loopCounter7 + 1;
          flt_bead_ratio_2 = bead_ratio_test_arr_2.ElementAt( loopCounter7 -1);
          flt_post_PCR2_bead_vol = flt_bead_ratio_2 * flt_post_PCR2_sample_vol;
          flt_post_PCR2_mix_vol = flt_post_PCR2_sample_vol + flt_post_PCR2_bead_vol;
          flt_post_PCR2_mix_vol = flt_post_PCR2_mix_vol * 0.75;
          if (flt_post_PCR2_mix_vol > 300)
          {
            flt_post_PCR2_mix_vol = 300;
          }
          bead_volume_arr_2.AddAsLast(flt_post_PCR2_bead_vol);
          sample_mix_vol_arr_2.AddAsLast(flt_post_PCR2_mix_vol);
        }
      }
    }
    else
    {
      flt_post_PCR2_bead_vol = flt_bead_ratio_2 * flt_post_PCR2_sample_vol;
      flt_post_PCR2_mix_vol = flt_post_PCR2_sample_vol + flt_post_PCR2_bead_vol;
      flt_post_PCR2_mix_vol = flt_post_PCR2_mix_vol * 0.75;
      if (flt_post_PCR2_mix_vol > 300)
      {
        flt_post_PCR2_mix_vol = 300;
      }
    }
    flt_post_PCR2_waste_vol = flt_post_PCR2_sample_vol + flt_post_PCR2_bead_vol;
    flt_post_PCR2_waste_vol = flt_post_PCR2_waste_vol - 5;
    flt_PCR2_ElutionVol = 50;
    flt_final_sample_volume = flt_PCR2_ElutionVol - 5;
    if (time_point < 4)
    {
      z_shift = 3 - time_point;
      PCR_plate_stack_height = 12.5;
      z_shift = z_shift * PCR_plate_stack_height;
      z_shift = z_shift + 11.5;
      LMSF_UTILITIES::SeqZShift(ML_STAR.PCR_Plate_Lid_Parking, z_shift, ML_STAR);
    }
    Bead_stock_volume = 25000;
    Beads_used = 0;
    Beads_used = Beads_used * 1.6;
    Trace ("Bead stock remaining:  ", Bead_stock_volume);
    Sample_Plate_arr.SetSize(0);
    Sample_Plate_arr.AddAsLast(ML_STAR.Sample_Plate_1);
    Sample_Plate_arr.AddAsLast(ML_STAR.Sample_Plate_2);
    Sample_Plate_arr.AddAsLast(ML_STAR.Sample_Plate_3);
    Sample_Plate_arr.AddAsLast(ML_STAR.Sample_Plate_4);
    Sample_Plate=Sample_Plate_arr.GetAt(time_point-1);
    MM_w_Rev_Primer_arr.SetSize(0);
    MM_w_Rev_Primer_arr.AddAsLast(ML_STAR.MM_w_R_primers_1);
    MM_w_Rev_Primer_arr.AddAsLast(ML_STAR.MM_w_R_primers_2);
    MM_w_Rev_Primer_arr.AddAsLast(ML_STAR.MM_w_R_primers_3);
    MM_w_Rev_Primer_arr.AddAsLast(ML_STAR.MM_w_R_primers_4);
    MM_w_Rev_Primer=MM_w_Rev_Primer_arr.GetAt(time_point-1);
    No_pooling_arr.SetSize(0);
    No_pooling_arr.AddAsLast(ML_STAR.No_pooling_1);
    No_pooling_arr.AddAsLast(ML_STAR.No_pooling_2);
    No_pooling_arr.AddAsLast(ML_STAR.No_pooling_3);
    No_pooling_arr.AddAsLast(ML_STAR.No_pooling_4);
    No_pooling_to=No_pooling_arr.GetAt(time_point-1);
    PCR_stack_arr.SetSize(0);
    if (use_ODTC == 1)
    {
      PCR_stack_arr.AddAsLast(ML_STAR.PCR_plate_stack_0004);
      PCR_stack_arr.AddAsLast(ML_STAR.PCR_plate_stack_0003);
      PCR_stack_arr.AddAsLast(ML_STAR.PCR_plate_stack_0002);
      PCR_stack_arr.AddAsLast(ML_STAR.PCR_plate_stack_0001);
      PCR_stack_get=PCR_stack_arr.GetAt(time_point-1);
      ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlate(PCR_stack_get, ML_STAR.PCR_Plate_full, 0, 1, ML_STAR);
    }
    if (is_pipetting == "true")
    {
      MECC::TraceComment(Translate("***************************************************************************\nPre-heat ODTC for 1st PCR \n***************************************************************************"));
      if (bln_Global_SimulatorMode == 0)
      {
        NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
        if (is_running_ODTC == "true")
        {
          odtc_script_path = "C:\\Program Files (x86)\\HAMILTON\\Methods\\GSF-IMS Project\\E. coli Methods\\Post-Selection PCR Prep\\PCR_Initialization.xml";
          NIST_DEVICE_CONTROLLERS::StartScriptODTC(ODTC, odtc_script_path, odtc_script_time, odtc_script_id);
        }
      }
    }
    MECC::TraceComment(Translate("=======================================================\nAdd samples to PCR plate and dilute with 10 uL DI water\n======================================================="));
    MECC::TraceComment(Translate("***************************************************************************\nRemove lids from PCR_Plate, Sample_Plate, and Reagent_Plate\n***************************************************************************"));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Reagent_Plate_lid, ML_STAR.Reagent_plate_lid_parking, 0, 1, ML_STAR);
    if (use_ODTC == 1)
    {
      if (is_primer_test != 1)
      {
        ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Sample_Plate_lid, ML_STAR.Sample_Plate_Lid_Parking, 0, 1, ML_STAR);
      }
      ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_Lid_Parking, 1, 1, ML_STAR);
    }
    else
    {
      if (is_primer_test != 1)
      {
        ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Sample_Plate_lid, ML_STAR.Sample_Plate_Lid_Parking, 1, 1, ML_STAR);
      }
    }
    MECC::TraceComment(Translate("***************************************************************************\nAdd sample DNA and DI water to PCR plate\n***************************************************************************"));
    if (is_pipetting == "true")
    {
      if (is_debugging == "true")
      {
        DebuggingPause();
      }
      if (is_primer_test == 1)
      {
        MECC::TraceComment(Translate("****** For primers test, sample DNA and DI water are pre-mixed in Reagent Plate ******"));
        Transfer_ReagentsToPCR(ML_STAR.MlStar50ulTipWithFilter, ML_STAR.Restr_Enzyme, ML_STAR.PCR_Plate_1, flt_test_plasmid_vol, 0, 0, 0, 0, 1, 0, 2, 0);
      }
      else
      {
        MECC::TraceComment(Translate("****** DI water ******"));
        Transfer_ReagentsToPCR(ML_STAR.MlStar50ulTipWithFilter, ML_STAR.Restr_Enzyme, ML_STAR.PCR_Plate_1, flt_di_water_volume, 0, 0, 6, flt_di_water_mix_vol, 1, 0, 0, 1);
        if (is_debugging == "true")
        {
          DebuggingPause();
        }
        MECC::TraceComment(Translate("****** Sample DNA ******"));
        Transfer_ReagentsToPCR(ML_STAR.MlStar50ulTipWithFilter, Sample_Plate, ML_STAR.PCR_Plate_1, flt_plasmid_volume, 0, 0, 0, 0, 0, 0, 2, 0);
      }
    }
    MECC::TraceComment(Translate("***************************************************************************\nReplace lid on Sample_Plate\n***************************************************************************"));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (is_primer_test != 1)
    {
      ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Sample_Plate_Lid_Parking, ML_STAR.Sample_Plate_lid, 1, 1, ML_STAR);
    }
    MECC::TraceComment(Translate("=======================================================\nFirst PCR Step\n======================================================="));
    MECC::TraceComment(Translate("***************************************************************************\nAdd Master mix with Primers to PCR plate\n***************************************************************************"));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (is_pipetting == "true")
    {
      MECC::TraceComment(Translate("***** F primers *****"));
      if (is_primer_test == 1)
      {
        MECC::TraceComment(Translate("*** test pattern ***\n*** 2x volume becasue MM + primers for primers test has both F and R primers pre-mixed (by user) ***"));
        SeqCopySequence(asp_seq, ML_STAR.MM_w_primers_test);
        Transfer_ReagentsToPCR(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, asp_seq, ML_STAR.PCR_Plate_1, flt_primer_test_vol, 0, 0, 0, 0, 0, 0, 0, 0);
      }
      else
      {
        SeqCopySequence(asp_seq, ML_STAR.MM_w_F_primers);
        Transfer_ReagentsToPCR(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, asp_seq, ML_STAR.PCR_Plate_1, flt_primer_volume, 0, 0, 0, 0, 0, 0, 0, 0);
      }
      MECC::TraceComment(Translate("***** R primers *****"));
      if (is_primer_test == 1)
      {
        MECC::TraceComment(Translate("*** test pattern ***\n*** no pipetting needed here becasue MM + primers for primers test has both F and R primers pre-mixed (by user) ***"));
      }
      else
      {
        SeqCopySequence(asp_seq, MM_w_Rev_Primer);
        Transfer_ReagentsToPCR(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, asp_seq, ML_STAR.PCR_Plate_1, flt_primer_volume, 0, 0, 10, flt_primer_mix_vol, 0, 1, 0, 0);
      }
    }
    MECC::TraceComment(Translate("***************************************************************************\nReplace lid on PCR_Plate and Reagent_Plate\n***************************************************************************"));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (use_ODTC == 1)
    {
      ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_Lid_Parking, ML_STAR.PCR_Plate_lid, 0, 1, ML_STAR);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.Reagent_plate_lid_parking, ML_STAR.Reagent_Plate_lid, 0, 1, ML_STAR);
    if (use_ODTC == 1)
    {
      MECC::TraceComment(Translate("***************************************************************************\nWait for ODTC lid pre-heating method, \nthen open ODTC, move PCR plate to ODTC, close ODTC and run step 1 PCR method\n***************************************************************************"));
      if (is_debugging == "true")
      {
        DebuggingPause();
      }
      if (bln_Global_SimulatorMode == 0)
      {
        if (is_running_ODTC == "true")
        {
          NIST_DEVICE_CONTROLLERS::WaitForScriptODTC(ODTC, odtc_script_time, odtc_script_id);
        }
        NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
      }
      ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlateWithLid(ML_STAR.PCR_Plate_move, ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_ODTC_move, ML_STAR.PCR_Plate_ODTC_lid, 0, 0, ML_STAR);
      if (is_pipetting == "true")
      {
        if (bln_Global_SimulatorMode == 0)
        {
          NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
          if (is_running_ODTC == "true")
          {
            odtc_script_path = "C:\\Program Files (x86)\\HAMILTON\\Methods\\GSF-IMS Project\\E. coli Methods\\Post-Selection PCR Prep\\PCR_Step_1.xml";
            NIST_DEVICE_CONTROLLERS::StartScriptODTC(ODTC, odtc_script_path, odtc_script_time, odtc_script_id);
          }
        }
      }
    }
    else
    {
      customDialog_2.InitCustomDialog("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");
      customDialog_2.ShowCustomDialog();
    }
    if (is_primer_test != 1)
    {
      ISWAP_PLATEANDLIDMOVEMENT::MoveEppendorf350uLElutionPlateWithLid(ML_STAR.Sample_Plate_full, ML_STAR.Sample_Plate_lid, ML_STAR.Elution_Plate_Parking, ML_STAR.Elution_Plate_Parking_lid, 0, 1, ML_STAR);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveEppendorf350uLElutionPlateWithLid(ML_STAR.Pooling_Plate_Parking, ML_STAR.Pooling_Plate_Parking_lid, ML_STAR.Pooling_Plate, ML_STAR.Pooling_Plate_lid, 0, 1, ML_STAR);
    pcr_time = 689;
    pipetting_time = 311;
    wait_time = pcr_time - pipetting_time;
    if (bln_Global_SkipAllTimers == 1)
    {
      wait_time = 1;
    }
    if( 0 == timer1.SetTimer(wait_time) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == timer1.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("***************************************************************************\nFirst PCR clean-up;\nAdd beads to Midi plate\nFinish PCR; Remove lid from PCR_Plate;\nbind plasmid DNA to the beads and keep the supernatant\n***************************************************************************"));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    TrcTrace4(Translate("************ Pipetting beads with ratio: "), flt_bead_ratio_1_1, Translate(" ******************"), Translate(""));
    Add_AmpureSingle(ML_STAR.Bead_Stock, ML_STAR.Midi_on_HHS_1, flt_post_PCR1_1_bead_vol, 0, 0, Translate("1_1"));
    if (use_ODTC == 1)
    {
      MECC::TraceComment(Translate("***************************************************************************\nWait for PCR method to finish, then move PCR plate from ODTC, and take lid off of PCR plate\n***************************************************************************"));
      if (is_debugging == "true")
      {
        DebuggingPause();
      }
      if (bln_Global_SimulatorMode == 0)
      {
        if (is_running_ODTC == "true")
        {
          NIST_DEVICE_CONTROLLERS::WaitForScriptODTC(ODTC, odtc_script_time, odtc_script_id);
        }
        NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
      }
      ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlateWithLid(ML_STAR.PCR_Plate_ODTC_move, ML_STAR.PCR_Plate_ODTC_lid, ML_STAR.PCR_Plate_move, ML_STAR.PCR_Plate_lid, 0, 0, ML_STAR);
      ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_Lid_Parking, 1, 1, ML_STAR);
      MECC::TraceComment(Translate("***************************************************************************\nClose ODTC, and run PCR pre-heat method on ODTC\n***************************************************************************"));
      if (is_debugging == "true")
      {
        DebuggingPause();
      }
      if (is_pipetting == "true")
      {
        if (bln_Global_SimulatorMode == 0)
        {
          NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
          if (is_running_ODTC == "true")
          {
            odtc_script_path = "C:\\Program Files (x86)\\HAMILTON\\Methods\\GSF-IMS Project\\E. coli Methods\\Post-Selection PCR Prep\\PCR_Initialization.xml";
            NIST_DEVICE_CONTROLLERS::StartScriptODTC(ODTC, odtc_script_path, odtc_script_time, odtc_script_id);
          }
        }
      }
    }
    else
    {
      customDialog_4.InitCustomDialog("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");
      customDialog_4.ShowCustomDialog();
    }
    MECC::TraceComment(Translate("=================================================\nShake Midi plate for ten seconds to resuspend beads;\nTransfer samples from PCR plate to Midi plate; \nMix by pipetting 10x;\nand incubate seven additional minutes without shaking\n================================================="));
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
      HSLHamHeaterShaker::StartShaker(HHS3, 1800);
    }
    MECC::TraceComment(Translate("***** Now shaking at RT for 10s ......."));
    if( 0 == timer3.SetTimer(timer_10_sec) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 10 sec shaking timer ****"));
    if( 0 == timer3.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::StopShaker(HHS3);
    }
    if (is_pipetting == "true")
    {
      Transfer_PCRtoMidi(ML_STAR.PCR_Plate_1, ML_STAR.Midi_on_HHS_1, flt_post_PCR1_1_sample_vol, flt_post_PCR1_1_mix_vol);
    }
    MECC::TraceComment(Translate("***** Now incubating at RT for 7 min ......."));
    if( 0 == timer2.SetTimer(timer_7_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 7 minute timer for RT incubation ****"));
    if (use_ODTC == 1)
    {
      ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_Lid_Parking, ML_STAR.PCR_Plate_lid, 1, 1, ML_STAR);
    }
    if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    MECC::TraceComment(Translate("***** Incubation finished..."));
    MECC::TraceComment(Translate("=======================================================\nMove Midi plate to magnet, incubate 4 minutes,\nthen transfer supernatant to columns 7-9 in Midi plate\nmove Midi plate to HHS\n======================================================="));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("**** on magnet..."));
    if( 0 == magnet_timer.SetTimer(timer_4_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 4 minute timer for magnet ****"));
    if( 0 == magnet_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** done."));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (is_pipetting == "true")
    {
      Transfer_FromMidiOnMagnet(ML_STAR.Midi_on_magnet_1, ML_STAR.Midi_on_magnet_3, flt_post_PCR1_1_samp_bead_vol, 0, 1);
    }
    MECC::TraceComment(Translate("**** Move plate to HHS"));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_magnet, ML_STAR.Midi_on_HHS, 1, 1, ML_STAR);
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
    }
    MECC::TraceComment(Translate("=====================================================================\nNext step: bind PCR product to beads and discard the supernatant\n====================================================================="));
    if (is_bead_ratio_test_exp == 1)
    {
      TrcTrace8(Translate("******************* "), Translate("Test: pipetting beads with ratios: "), bead_ratio_test_arr_1_2.ElementAt( 1 -1), Translate(", "), bead_ratio_test_arr_1_2.ElementAt( 2 -1), Translate(", "), bead_ratio_test_arr_1_2.ElementAt( 3 -1), Translate(" ************************"));
    }
    else
    {
      TrcTrace4(Translate("************ Pipetting beads with ratio: "), flt_bead_ratio_1_2, Translate(" ******************"), Translate(""));
    }
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    Add_AmpureSingle(ML_STAR.Bead_Stock, ML_STAR.Midi_on_HHS_3, flt_post_PCR1_2_bead_vol, 1, flt_post_PCR1_2_mix_vol, Translate("1_2"));
    MECC::TraceComment(Translate("***** Now incubating at RT for 7 min ......."));
    if( 0 == timer2.SetTimer(timer_7_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 7 minute timer for RT incubation ****"));
    if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("***** Incubation finished..."));
    MECC::TraceComment(Translate("=======================================================\nMove Midi plate to magnet, incubate 5 minutes,\nthen discard the supernatant\n======================================================="));
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("**** on magnet..."));
    if( 0 == magnet_timer.SetTimer(timer_5_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 5 minute timer for magnet ****"));
    if( 0 == magnet_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** done."));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (is_pipetting == "true")
    {
      Transfer_PlatetoWaste(ML_STAR.Midi_on_magnet_3, flt_post_PCR1_2_waste_vol, Translate("Nano_SVF_EthanolWaste_JetEmpty_HigherAirTransport"));
    }
    MECC::TraceComment(Translate("===============================================================================\nEthanol rinse (1x), then resuspend sample in elution buffer, put plate on magnet, and wait 5 minutes\n==============================================================================="));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    EthanolStep(ML_STAR.Midi_on_magnet_3, ML_STAR.Ethanol_85, flt_PCR1_ElutionVol, ML_STAR.DI_Water, ML_STAR.Midi_on_HHS_3);
    MECC::TraceComment(Translate("==================================================================================================================================\nRemove lid from Reagent_Plate and Move midi to Magnet\n=================================================================================================================================="));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.Reagent_Plate_lid, ML_STAR.Reagent_plate_lid_parking, 0, 1, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 1, 1, ML_STAR);
    if( 0 == magnet_timer.SetTimer(timer_5_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("***************************************************************************\nRemove lid from PCR_Plate; and prep plate for Second PCR\n***************************************************************************"));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (use_ODTC == 1)
    {
      ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_Lid_Parking, 1, 1, ML_STAR);
    }
    MECC::TraceComment(Translate("**** Prep PCR plate 2 ***"));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (is_pipetting == "true")
    {
      Transfer_ReagentsToPCR(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.PCR_Mix_Second_24, ML_STAR.PCR_Plate_2, flt_PCR2_MM_volume, 0, 0, 0, 0, 1, 0, 0, 0);
    }
    MECC::TraceComment(Translate("==============================================================================\nWait for 5 minute magnet timer to finish, then pipette supernatant from Midi plate to new PCR plate\n=============================================================================="));
    MECC::TraceComment(Translate("**** 5 minute timer for magnet ****"));
    if( 0 == magnet_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (is_pipetting == "true")
    {
      Transfer_FromMidiOnMagnet(ML_STAR.Midi_on_magnet_3, ML_STAR.PCR_Plate_2, flt_PCR1_CleanupVol, flt_PCR2_mix_vol, 0);
    }
    MECC::TraceComment(Translate("***************************************************************************\nReplace lid on PCR_Plate;\nmove Midi plate to HHS; then put lid back on reagent plate\n***************************************************************************"));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (use_ODTC == 1)
    {
      ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_Lid_Parking, ML_STAR.PCR_Plate_lid, 0, 1, ML_STAR);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_magnet, ML_STAR.Midi_on_HHS, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("***************************************************************************\nReplace lid on Reagent_Plate\n***************************************************************************"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.Reagent_plate_lid_parking, ML_STAR.Reagent_Plate_lid, 1, 1, ML_STAR);
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
    }
    if (use_ODTC == 1)
    {
      MECC::TraceComment(Translate("***************************************************************************\nWait for ODTC lid pre-heating method, \nthen open ODTC, move PCR plate to ODTC, close ODTC and run step 2 PCR method\n***************************************************************************"));
      if (is_debugging == "true")
      {
        DebuggingPause();
      }
      if (bln_Global_SimulatorMode == 0)
      {
        if (is_running_ODTC == "true")
        {
          NIST_DEVICE_CONTROLLERS::WaitForScriptODTC(ODTC, odtc_script_time, odtc_script_id);
        }
        NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
      }
      ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlateWithLid(ML_STAR.PCR_Plate_move, ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_ODTC_move, ML_STAR.PCR_Plate_ODTC_lid, 0, 0, ML_STAR);
      if (is_pipetting == "true")
      {
        if (bln_Global_SimulatorMode == 0)
        {
          NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
          if (is_running_ODTC == "true")
          {
            odtc_script_path = "C:\\Program Files (x86)\\HAMILTON\\Methods\\GSF-IMS Project\\E. coli Methods\\Post-Selection PCR Prep\\PCR_Step_2.xml";
            NIST_DEVICE_CONTROLLERS::StartScriptODTC(ODTC, odtc_script_path, odtc_script_time, odtc_script_id);
          }
        }
      }
    }
    else
    {
      customDialog_1.InitCustomDialog("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");
      customDialog_1.ShowCustomDialog();
    }
    pcr_time = 1480;
    pipetting_time = 370;
    wait_time = pcr_time - pipetting_time;
    if (bln_Global_SkipAllTimers == 1)
    {
      wait_time = 1;
    }
    if( 0 == timer1.SetTimer(wait_time) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("***************************************************************************\nSecond PCR clean-up;\nMove Midi to HHS;\nAdd beads to Midi plate\nFinish PCR; Remove lid from PCR_Plate;\nbind PCR product to the beads and discard the supernatant\n***************************************************************************"));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (is_bead_ratio_test_exp == 1)
    {
      TrcTrace8(Translate("******************* Test: pipetting beads with ratios: "), bead_ratio_test_arr_2.ElementAt( 1 -1), Translate(", "), bead_ratio_test_arr_2.ElementAt( 2 -1), Translate(", "), bead_ratio_test_arr_2.ElementAt( 3 -1), Translate(", "), bead_ratio_test_arr_2.ElementAt( 4 -1));
    }
    else
    {
      TrcTrace4(Translate("************ Pipetting beads with ratio: "), flt_bead_ratio_2, Translate(" ******************"), Translate(""));
    }
    MECC::TraceComment(Translate("**** timer waiting for second PCR ****"));
    if( 0 == timer1.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    Add_AmpureSingle(ML_STAR.Bead_Stock, ML_STAR.Midi_on_HHS_4, flt_post_PCR2_bead_vol, 0, 0, Translate("2"));
    if (use_ODTC == 1)
    {
      MECC::TraceComment(Translate("***************************************************************************\nWait for PCR method to finish, then move PCR plate from ODTC, and take lid off of PCR plate\n***************************************************************************"));
      if (is_debugging == "true")
      {
        DebuggingPause();
      }
      if (bln_Global_SimulatorMode == 0)
      {
        if (is_running_ODTC == "true")
        {
          NIST_DEVICE_CONTROLLERS::WaitForScriptODTC(ODTC, odtc_script_time, odtc_script_id);
        }
        NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
      }
      ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlateWithLid(ML_STAR.PCR_Plate_ODTC_move, ML_STAR.PCR_Plate_ODTC_lid, ML_STAR.PCR_Plate_move, ML_STAR.PCR_Plate_lid, 0, 0, ML_STAR);
      ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_Lid_Parking, 1, 1, ML_STAR);
      MECC::TraceComment(Translate("***************************************************************************\nClose ODTC\n***************************************************************************"));
      if (is_debugging == "true")
      {
        DebuggingPause();
      }
      if (is_pipetting == "true")
      {
        if (bln_Global_SimulatorMode == 0)
        {
          NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
        }
      }
    }
    else
    {
      customDialog_3.InitCustomDialog("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");
      customDialog_3.ShowCustomDialog();
    }
    MECC::TraceComment(Translate("=================================================\nShake midi plate for 10 seconds to resuspend beads;\nTransfer samples from PCR plate to Midi plate;\nMix by pipetting 10x;\nand incubate 5 additional minutes without shaking\n================================================="));
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
      HSLHamHeaterShaker::StartShaker(HHS3, 1800);
    }
    MECC::TraceComment(Translate("***** Now shaking at RT for 10s ......."));
    if( 0 == timer3.SetTimer(timer_10_sec) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 10 sec shaking timer ****"));
    if( 0 == timer3.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::StopShaker(HHS3);
    }
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (is_pipetting == "true")
    {
      Transfer_PCRtoMidi(ML_STAR.PCR_Plate_2, ML_STAR.Midi_on_HHS_4, flt_post_PCR2_sample_vol, flt_post_PCR2_mix_vol);
    }
    MECC::TraceComment(Translate("***** Now incubating at RT for 7 min ......."));
    if( 0 == timer2.SetTimer(timer_7_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 7 minute timer for RT incubation ****"));
    if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("***** Incubation finished..."));
    MECC::TraceComment(Translate("=======================================================\nMove Midi plate to magnet, incubate 5 minutes,\nthen discard supernatant;\n======================================================="));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("**** on magnet..."));
    if( 0 == magnet_timer.SetTimer(timer_5_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 5 minute timer for magnet ****"));
    if( 0 == magnet_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** done."));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (is_pipetting == "true")
    {
      Transfer_PlatetoWaste(ML_STAR.Midi_on_magnet_4, flt_post_PCR2_waste_vol, Translate("Nano_SVF_EthanolWaste_JetEmpty_HigherAirTransport"));
    }
    MECC::TraceComment(Translate("===============================================================================\nEthanol rinse (1x), then resuspend sample in elution buffer, put plate on magnet, and wait 5 minutes\n==============================================================================="));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    EthanolStep(ML_STAR.Midi_on_magnet_4, ML_STAR.Ethanol_70, flt_PCR2_ElutionVol, ML_STAR.Elution_Buffer, ML_STAR.Midi_on_HHS_4);
    MECC::TraceComment(Translate("==================================================================================================================================\nMove to Magnet\n=================================================================================================================================="));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 1, 1, ML_STAR);
    if( 0 == magnet_timer.SetTimer(timer_5_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    time_lid_move = timer_5_min - 30;
    if (time_lid_move < 2)
    {
      time_lid_move = 2;
    }
    if( 0 == lid_move_timer.SetTimer(time_lid_move) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == lid_move_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("***************************************************************************\nRemove lid from Pooling_Plate\n***************************************************************************"));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Pooling_Plate_lid, ML_STAR.Pooling_Plate_Lid_Parking, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================================\nWait for 5 minute magnet timer to finish, then pipette supernatant from Midi plate to new Pooling plate\n=============================================================================="));
    MECC::TraceComment(Translate("**** 5 minute timer for magnet ****"));
    if( 0 == magnet_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (is_pipetting == "true")
    {
      MECC::TraceComment(Translate("***************************************************************************\nTransfer Cleaned up PCR samples into 24 wells of Pooling_Plate\n***************************************************************************"));
      if (is_debugging == "true")
      {
        DebuggingPause();
      }
      Transfer_FromMidiOnMagnet(ML_STAR.Midi_on_magnet_4, No_pooling_to, flt_final_sample_volume, 0, 1);
    }
    MECC::TraceComment(Translate("**** Move Mid plate to waste"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_magnet, ML_STAR.MIDI_Waste, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("***************************************************************************\nReplace lid on Pooling_Plate\n***************************************************************************"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Pooling_Plate_Lid_Parking, ML_STAR.Pooling_Plate_lid, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("*** PCR plate to waste"));
    if (use_ODTC == 1)
    {
      ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlate(ML_STAR.PCR_Plate_move, ML_STAR.PCR_Plate_waste, 1, 1, ML_STAR);
    }
    CleanUp();
    ISWAP_PLATEANDLIDMOVEMENT::_ExitLibrary();
    NIST_DEVICE_CONTROLLERS::_ExitLibrary();
    NIST_TRUSEQNANO_PREP::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    STAR_TIP_TOOLS::_ExitLibrary();
  } }
