 namespace _Method { #include "Common\\iSWAP-PlateAndLidMovement.hs_" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_Device_Controllers.hs_" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_TruSeqNano_Prep.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
#include "Post-Selection PCR and clean-up.24 samples.res"
variable bln_Global_SimulatorMode;
variable str_Global_ODTCIPAddress;
variable ODTC;
variable odtc_script_path;
variable odtc_script_time;
variable odtc_script_id;
variable var_Global_HHSNode3;
variable HHS3;
variable SetTempHHS3;
variable pipette_volume;
variable loopCounter3;
variable primer_mix_volume;
variable loopCounter5;
variable loopCounter1;
variable loopCounter2;
variable loopCounter6;
variable is_debugging;
dialog dialogHandle_1;
dialog dialogHandle_2;
dialog dialogHandle_3;
dialog dialogHandle_4;
dialog dialogHandle_5;
dialog dialogHandle_6;
dialog dialogHandle_7;
dialog dialogHandle_8;
dialog dialogHandle_9;
dialog dialogHandle_10;
dialog dialogHandle_11;
dialog dialogHandle_12;
dialog dialogHandle_13;
dialog dialogHandle_14;
global device ML_STAR ("Post-Selection PCR and clean-up.24 samples.lay", "ML_STAR", hslTrue);
global device HxFan ("Post-Selection PCR and clean-up.24 samples.lay", "HxFan", hslTrue);
sequence Sample_Plate_arr[];
sequence Sample_Plate;
sequence Rev_Primer_arr[];
sequence Rev_Primer;
dialog dialogHandle_15;
dialog dialogHandle_16;
variable sample_volume;
variable bead_ratio;
variable bead_volume;
variable pcr_time;
variable pipetting_time;
variable wait_time;
timer timer1;
variable mix_volume;
variable empty_disp;
timer magnet_timer;
timer timer2;
timer timer3;
variable time_point;
dialog dialogHandle_17;
dialog dialogHandle_18;
dialog dialogHandle_19;
dialog dialogHandle_20;
dialog dialogHandle_21;
dialog dialogHandle_22;
dialog dialogHandle_23;
dialog dialogHandle_24;
variable elution_vol;
variable bln_Global_SkipAllTimers;
variable timer_2_min;
variable timer_5_min;
variable timer_3_min;
sequence Pooling_arr[];
sequence Pooling_to;
variable user_choice;
variable loopCounter4;
dialog customDialog_25;
dialog customDialog_26;
dialog customDialog_27;
dialog customDialog_28;
dialog customDialog_29;
dialog customDialog_30;
dialog customDialog_31;
dialog dialogHandle_32;
variable Bead_stock_volume;
variable Beads_used;
dialog dialogHandle_33;
variable sample_mix_volume;
variable timer_10_sec;
dialog dialogHandle1;
dialog dialogHandle_34;
dialog dialogHandle_35;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ISWAP_PLATEANDLIDMOVEMENT::_InitLibrary();
    NIST_DEVICE_CONTROLLERS::_InitLibrary();
    NIST_TRUSEQNANO_PREP::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    bln_Global_SimulatorMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    is_debugging = "false";
    bln_Global_SkipAllTimers = 0;
    if (bln_Global_SimulatorMode == 1)
    {
      bln_Global_SkipAllTimers = 1;
    }
    if (bln_Global_SkipAllTimers == 1)
    {
      timer_2_min = 1;
      timer_3_min = 1;
      timer_5_min = 1;
      timer_10_sec = 1;
    }
    else
    {
      timer_2_min = 120;
      timer_3_min = 180;
      timer_5_min = 300;
      timer_10_sec = 10;
    }
    GetParams();
    Bead_stock_volume = 35000;
    dialogHandle1.SetInputSize(1);
    dialogHandle1.SetInputField(0, Translate("Bead stock (uL):"), hslFloat, Bead_stock_volume, 0, 50000);
    dialogHandle1.ShowInput(Translate("Bead stock volume?"), hslInfinite, hslOKOnly | hslDefButton1);
    Bead_stock_volume = dialogHandle1.GetInputField(0);
    Trace ("Bead stock remaining:  ", Bead_stock_volume);
    StartUp();
    Sample_Plate_arr.SetSize(0);
    Sample_Plate_arr.AddAsLast(ML_STAR.Sample_Plate_1);
    Sample_Plate_arr.AddAsLast(ML_STAR.Sample_Plate_2);
    Sample_Plate_arr.AddAsLast(ML_STAR.Sample_Plate_3);
    Sample_Plate_arr.AddAsLast(ML_STAR.Sample_Plate_4);
    Sample_Plate=Sample_Plate_arr.GetAt(time_point-1);
    Rev_Primer_arr.SetSize(0);
    Rev_Primer_arr.AddAsLast(ML_STAR.Rev_Primers_1);
    Rev_Primer_arr.AddAsLast(ML_STAR.Rev_Primers_2);
    Rev_Primer_arr.AddAsLast(ML_STAR.Rev_Primers_3);
    Rev_Primer_arr.AddAsLast(ML_STAR.Rev_Primers_4);
    Rev_Primer=Rev_Primer_arr.GetAt(time_point-1);
    Pooling_arr.SetSize(0);
    Pooling_arr.AddAsLast(ML_STAR.Pooling_Plate_1);
    Pooling_arr.AddAsLast(ML_STAR.Pooling_Plate_2);
    Pooling_arr.AddAsLast(ML_STAR.Pooling_Plate_3);
    Pooling_arr.AddAsLast(ML_STAR.Pooling_Plate_4);
    Pooling_to=Pooling_arr.GetAt(time_point-1);
    MECC::TraceComment(Translate("***************************************************************************\nAdd beads\n***************************************************************************"));
    sample_volume = 90;
    bead_ratio = 0.6;
    bead_volume = bead_ratio * sample_volume;
    dialogHandle_35.SetInputSize(1);
    dialogHandle_35.SetInputField(0, Translate("Bead volume to pipette (uL):"), hslFloat, bead_volume, 0, 50000);
    dialogHandle_35.ShowInput(Translate("Bead pipetting volume per well?"), hslInfinite, hslOKOnly | hslDefButton1);
    bead_volume = dialogHandle_35.GetInputField(0);
    Add_AmpureSingle(ML_STAR.Bead_Stock, ML_STAR.Midi_on_HHS_1, bead_volume, 0, 0);
    CleanUp();
    ISWAP_PLATEANDLIDMOVEMENT::_ExitLibrary();
    NIST_DEVICE_CONTROLLERS::_ExitLibrary();
    NIST_TRUSEQNANO_PREP::_ExitLibrary();
  } }
