function Add_AmpureSingle( sequence & seq_AmpureBeads, sequence & seq_Destination, variable var_BeadVolumePerWell, variable var_LLD_On, variable var_MixVolume ) void ;
private function CleanUp(  ) void ;
private function ErrorHandling_TipPickup( sequence & seq_TipsToUse ) void ;
private function GetParams(  ) void ;
private function Initialize_HHS( variable & var_Local_DeviceID, variable var_Local_Node ) void ;
function SetHHSTemperature( variable var_HHS_ID, variable var_Temperature ) void ;
private function StartUp(  ) void ;
private function TipPickupWithErrorHandling( sequence & seq_tipsForPickup ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function Initialize_HHS( variable & var_Local_DeviceID, variable var_Local_Node ) void {
  private dialog customDialog_1;
  private variable bln_Local_HHSInitReturn;
  private variable int_Global_ReturnDialog;
  private variable loopCounter20;
  var_Local_DeviceID = 0;
  MECC::TraceComment(Translate("==================================================================================================================================\nInitialize_HHS Start\n=================================================================================================================================="));
  Trace ("==================================================================================================================================");
  Trace ("Initializing HHS Located at Node:  ", var_Local_Node);
  Trace ("==================================================================================================================================");
  {
    loopCounter20 = 0;
    while (1 == 1)
    {
      loopCounter20 = loopCounter20 + 1;
      HSLHamHeaterShaker::SetSimulation(bln_Global_SimulatorMode);
      bln_Local_HHSInitReturn = HSLHamHeaterShaker::CreateUsbDevice(var_Local_Node, var_Local_DeviceID);
      if (bln_Local_HHSInitReturn != 0)
      {
        MECC::TraceComment(Translate("==================================================================================================================================\nFailed to Initialize HHS\n=================================================================================================================================="));
        HSLHamHeaterShaker::Terminate();
        customDialog_1.InitCustomDialog("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");
        customDialog_1.ShowCustomDialog();
        int_Global_ReturnDialog = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
        if (int_Global_ReturnDialog == 2)
        {
          MECC::TraceComment(Translate("==================================================================================================================================\nMethod Aborted\n=================================================================================================================================="));
          abort;
        }
      }
      else
      {
        break;
      }
    }
  }
  MECC::TraceComment(Translate("==================================================================================================================================\nInitialize_HHS Finish\n=================================================================================================================================="));
}

private function CleanUp(  ) void {
  MECC::TraceComment(Translate("***************************************************************************\nCleanUp() submethod\n***************************************************************************"));
  if (bln_Global_SimulatorMode == 0)
  {
    HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    NIST_DEVICE_CONTROLLERS::TerminateHHSs();
    if (time_point == 4)
    {
      NIST_DEVICE_CONTROLLERS::TerminateCPAC();
    }
  }
  TipCount::Write2(ML_STAR.MlStar50ulTipWithFilter, "tip_counter_50", ML_STAR);
  TipCount::Write2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, "tip_counter_300", ML_STAR);
  TipCount::Write2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, "tip_counter_1000", ML_STAR);
}

private function StartUp(  ) void {
  private dialog customDialog_2;
  private dialog dialogHandle_3;
  private dialog customDialog_4;
  private variable SetTempCPAC;
  MECC::TraceComment(Translate("***************************************************************************\nStartUp() submethod\n***************************************************************************"));
  TipCount::Edit2(ML_STAR.MlStar50ulTipWithFilter, "tip_counter_50", ML_STAR, 300);
  TipCount::Edit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, "tip_counter_300", ML_STAR, 300);
  TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, "tip_counter_1000", ML_STAR, 300);
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  if (bln_Global_SimulatorMode == 0)
  {
    var_Global_HHSNode3 = 3;
    SetTempHHS3 = 20;
    Initialize_HHS(HHS3, var_Global_HHSNode3);
    NIST_TRUSEQNANO_PREP::SetHHSTemperature(HHS3, SetTempHHS3);
    HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
}

private function GetParams(  ) void {
  private variable param_dict;
  private variable loc;
  private variable read_line;
  private file file1;
  private variable split_line[];
  private variable time_point_str;
  private variable key_exists;
  private variable param_file;
  private variable file_exists;
  private dialog customDialog_5;
  private dialog dialogHandle_6;
  private dialog customDialog_7;
  private dialog dialogHandle_8;
  param_dict = "param_dict";
  HSLExtensions::Dictionary::CreateDictionary(param_dict, 2);
  param_file = "C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv";
  file_exists = HSLExtensions::File::Exists(param_file);
  time_point = 1;
}

function Add_AmpureSingle( sequence & seq_AmpureBeads, sequence & seq_Destination, variable var_BeadVolumePerWell, variable var_LLD_On, variable var_MixVolume ) void {
  private variable MixVolume_Beads;
  private variable MixCycles_Beads;
  private variable LC_Beads;
  private variable FixedHt_Dispense;
  private variable touch_Off;
  private variable MixCycles_Disp;
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_AmpureSingle <<<<<<<<<<"));
  Trace ("Volume of Sample Purification Beads per well:  ", var_BeadVolumePerWell);
  if (var_LLD_On == 0)
  {
    MECC::TraceComment(Translate("*** cLLD off for the dispense ***"));
    FixedHt_Dispense = 0.2;
    touch_Off = 1;
  }
  else
  {
    MECC::TraceComment(Translate("*** cLLD on for the dispense ***"));
    FixedHt_Dispense = 0;
    touch_Off = 0;
  }
  if (var_MixVolume > 0)
  {
    MixCycles_Disp = 10;
  }
  else
  {
    MixCycles_Disp = 0;
  }
  MECC::TraceComment(Translate("********** Fill plate with AMPure XP Beads ..........."));
  MixVolume_Beads = Bead_stock_volume - 5000;
  MixVolume_Beads = MixVolume_Beads / (8 * 1.0);
  if (MixVolume_Beads > 750)
  {
    MixVolume_Beads = 750;
  }
  Trace ("MixVolume_Beads:  ", MixVolume_Beads);
  MixCycles_Beads = 10;
  TipPickupWithErrorHandling(ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  {
    loopCounter2 = 0;
    while (
       (seq_Destination.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, seq_AmpureBeads, 1, seq_Destination, 1);
      loopCounter2 = loopCounter2 + 1;
      MixVolume_Beads = 300;
      MixCycles_Beads = 2;
      TipPickupWithErrorHandling(ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
      LC_Beads = Translate("BarSeq_BeadsSolution_SurfaceEmpty_Subsequent");
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (seq_Destination.GetCurrentPosition() > 0 && seq_Destination.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    seq_AmpureBeads.SetMax(seq_AmpureBeads.GetTotal());
    seq_Destination.SetMax(seq_Destination.GetTotal());
    seq_AmpureBeads.SetCurrentPosition(1);
    seq_Destination.SetCurrentPosition(1);
  }
  Beads_used = var_BeadVolumePerWell * 24;
  Beads_used = Beads_used * 1.6;
  Bead_stock_volume = Bead_stock_volume - Beads_used;
  Trace ("Bead stock remaining:  ", Bead_stock_volume);
  MECC::TraceComment(Translate("******** Create mapping files ********"));
  if (bln_Global_SimulatorMode == 0)
  {
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AmpureBeads);
    {
      variable _FilterIdsArray_9[];
      variable _ColumnIdsArray_9[];
      variable _ColumnNamesArray_9[];
      variable _ExperimentsArray_9[];
      _FilterIdsArray_9.SetSize(1);
      _ColumnNamesArray_9.SetSize(10);
      _ColumnIdsArray_9.SetSize(10);
      _FilterIdsArray_9.SetAt(0, 10);
      _ColumnNamesArray_9.SetAt(0, "TRackBC");
      _ColumnIdsArray_9.SetAt(0, 1);
      _ColumnNamesArray_9.SetAt(1, "TLabwareId");
      _ColumnIdsArray_9.SetAt(1, 2);
      _ColumnNamesArray_9.SetAt(2, "TPositionId");
      _ColumnIdsArray_9.SetAt(2, 3);
      _ColumnNamesArray_9.SetAt(3, "TStatusSummary");
      _ColumnIdsArray_9.SetAt(3, 5);
      _ColumnNamesArray_9.SetAt(4, "TSumStateDescription");
      _ColumnIdsArray_9.SetAt(4, 6);
      _ColumnNamesArray_9.SetAt(5, "SRackBC");
      _ColumnIdsArray_9.SetAt(5, 8);
      _ColumnNamesArray_9.SetAt(6, "SLabwareId");
      _ColumnIdsArray_9.SetAt(6, 9);
      _ColumnNamesArray_9.SetAt(7, "SPositionId");
      _ColumnIdsArray_9.SetAt(7, 10);
      _ColumnNamesArray_9.SetAt(8, "SPositionBC");
      _ColumnIdsArray_9.SetAt(8, 11);
      _ColumnNamesArray_9.SetAt(9, "ActionDateTime");
      _ColumnIdsArray_9.SetAt(9, 12);
      _ExperimentsArray_9.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_Destination, 4, _FilterIdsArray_9, 0, _ColumnIdsArray_9, _ColumnNamesArray_9, _ExperimentsArray_9, "<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
  }
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_AmpureSingle <<<<<<<<<<"));
}

private function ErrorHandling_TipPickup( sequence & seq_TipsToUse ) void {
  private dialog dialogHandle_10;
  private dialog dialogHandle_11;
  private dialog customDialog_12;
  private dialog customDialog_13;
  private variable ret_AbortMethod;
  private variable var_DialogBoxString;
  private variable loopCounter_ChannelsNoTips;
  private variable ret_ReloadTips;
  private variable channelIndex;
  private variable flag_SkipToNextTipRack;
  private variable var_TipSequenceCurrentPosition;
  private variable var_NumberChannelsWithNoTips;
  private variable var_PickupPattern;
  private variable var_NoTipChannelString;
  private variable var_NumberTipsRemaining;
  private variable firmwareReturn;
  private variable var_Channel;
  private variable isTipPresent;
  private variable var_TipPickupPattern;
  private variable ret_RetryNextTipRack;
  private variable var_TipSequenceEndPosition;
  private variable Labware_ID;
  private variable Tip_Counter;
  private variable SimOn;
  private variable firmwareCommand;
  private variable arr_ChannelsNoTip[];
  MECC::TraceComment(Translate("START TIP PICKUP ERROR HANDLING"));
  SimOn = HSLML_STAR::IsSimulatorMode(ML_STAR);
  if (SimOn == 0)
  {
    var_PickupPattern = Translate("");
    arr_ChannelsNoTip.SetSize(0);
    {
      for(channelIndex = 0; channelIndex < 8;)
      {
        channelIndex = channelIndex + 1;
        firmwareCommand = StrConcat4(Translate("P"), channelIndex, Translate("RW"), Translate(""));
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          	firmwareReturn = arrRetValues[3];
        }
        isTipPresent = StrMid(firmwareReturn, 5, 1);
        if (isTipPresent == "1")
        {
          var_TipPickupPattern = Translate("0");
        }
        else
        {
          var_TipPickupPattern = Translate("1");
          arr_ChannelsNoTip.AddAsLast(channelIndex);
        }
        var_PickupPattern = var_PickupPattern + var_TipPickupPattern;
      }
    }
    var_NumberChannelsWithNoTips=arr_ChannelsNoTip.GetSize();
    var_NoTipChannelString = Translate("");
    {
      for(loopCounter_ChannelsNoTips = 0; loopCounter_ChannelsNoTips < var_NumberChannelsWithNoTips;)
      {
        loopCounter_ChannelsNoTips = loopCounter_ChannelsNoTips + 1;
        var_Channel=arr_ChannelsNoTip.GetAt(loopCounter_ChannelsNoTips-1);
        var_Channel = StrIStr(var_Channel);
        if (loopCounter_ChannelsNoTips != 1)
        {
          var_Channel = StrConcat2(Translate(", "), var_Channel);
        }
        var_NoTipChannelString = var_NoTipChannelString + var_Channel;
      }
    }
    var_TipSequenceCurrentPosition = seq_TipsToUse.GetCurrentPosition();
    var_TipSequenceEndPosition = seq_TipsToUse.GetCount();
    var_NumberTipsRemaining = var_TipSequenceEndPosition - var_TipSequenceCurrentPosition;
    var_NumberTipsRemaining = var_NumberTipsRemaining + 1;
    flag_SkipToNextTipRack = 1;
    if (var_NumberTipsRemaining <= 96)
    {
      flag_SkipToNextTipRack = 0;
    }
    var_DialogBoxString = StrConcat4(Translate("Channel(s) "), var_NoTipChannelString, Translate(" were not able to pick up the requested tip type."), Translate(""));
    customDialog_13.InitCustomDialog("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");
    customDialog_13.SetCustomDialogProperty( "radioButton2.IsEnabled", flag_SkipToNextTipRack );
    customDialog_13.ShowCustomDialog();
    ret_AbortMethod = customDialog_13.GetCustomDialogProperty( "ReturnValue" );
    ret_ReloadTips = customDialog_13.GetCustomDialogProperty( "radioButton1.IsChecked" );
    ret_RetryNextTipRack = customDialog_13.GetCustomDialogProperty( "radioButton2.IsChecked" );
    if (ret_AbortMethod == 2)
    {
      abort;
    }
    Labware_ID = SeqGetLabwareId(seq_TipsToUse);
    Labware_ID = StrLeft(Labware_ID, 3);
    if (Labware_ID == "TIP")
    {
      Tip_Counter = Translate("TruSeq_50F_Counter");
    }
    if (Labware_ID == "stf")
    {
      Tip_Counter = Translate("TruSeq_SVF_Counter");
    }
    if (Labware_ID == "HTF")
    {
      Tip_Counter = Translate("TruSeq_HVF_Counter");
    }
    if (ret_ReloadTips == 1)
    {
      PTL::ResetUnloadingStateAndSequences();
      PTL::SetUnloadingState("UserResponseTime", 0);
      PTL::SetUnloadingState("ErrorHandling", 3);
      PTL::SetUnloadingSize(1);
      PTL::SetUnloadingSequence(0, seq_TipsToUse, hslFalse, "");
      if( 0 == PTL::Unload(ML_STAR) )
      {
            PTL::RaiseRuntimeError(-1540095744, PTL::IDS::smartStepUnload, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
      PTL::GetUnloadingSequence(0, seq_TipsToUse);
      customDialog_12.InitCustomDialog("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");
      customDialog_12.ShowCustomDialog();
      PTL::ResetLoadingStateAndSequences();
      PTL::SetLoadingState("UserResponseTime", hslInfinite);
      PTL::SetLoadingState("ErrorHandling", 3);
      PTL::SetLoadingState("CalibrateCarrierChannel", -1);
      PTL::SetLoadingSize(1);
      PTL::SetLoadingSequence(0, seq_TipsToUse, 1, -10, hslTrue, hslTrue, Tip_Counter);
      if( 0 == PTL::Load(ML_STAR, hslTrue) )
      {
            PTL::RaiseRuntimeError(-1556872960, PTL::IDS::smartStepLoad, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
      PTL::GetLoadingSequence(0, seq_TipsToUse);
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
      onerror goto errLabel_14 ;
      err.Clear();
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      errLabel_14 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        dialogHandle_11.SetOutput(Translate("The instrument is still having trouble picking up tips."), Translate("\n\nThe method will now abort."), Translate("\n\nIf this issue persists, please contact Hamilton Service."));
        dialogHandle_11.ShowOutput(Translate("Error Picking Up Tips"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        abort;
      }   /* end if from skip handler if no error */
    }
    if (ret_RetryNextTipRack == 1)
    {
      if (var_TipSequenceCurrentPosition <= 96)
      {
        seq_TipsToUse.SetCurrentPosition(97);
      }
      else
      {
        if (var_TipSequenceCurrentPosition <= 192)
        {
          seq_TipsToUse.SetCurrentPosition(193);
        }
        else
        {
          if (var_TipSequenceCurrentPosition <= 288)
          {
            seq_TipsToUse.SetCurrentPosition(289);
          }
          else
          {
            if (var_TipSequenceCurrentPosition <= 384)
            {
              seq_TipsToUse.SetCurrentPosition(385);
            }
            else
            {
              if (var_TipSequenceCurrentPosition <= 480)
              {
                seq_TipsToUse.SetCurrentPosition(481);
              }
              else
              {
                if (var_TipSequenceCurrentPosition <= 576)
                {
                  seq_TipsToUse.SetCurrentPosition(577);
                }
                else
                {
                  if (var_TipSequenceCurrentPosition <= 672)
                  {
                    seq_TipsToUse.SetCurrentPosition(673);
                  }
                  else
                  {
                    if (var_TipSequenceCurrentPosition <= 768)
                    {
                      seq_TipsToUse.SetCurrentPosition(769);
                    }
                    else
                    {
                      if (var_TipSequenceCurrentPosition <= 864)
                      {
                        seq_TipsToUse.SetCurrentPosition(865);
                      }
                    }
                  }
                }
              }
            }
          }
        }
      }
      onerror goto errLabel_15 ;
      err.Clear();
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      errLabel_15 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        dialogHandle_10.SetOutput(Translate("The instrument is still having trouble picking up tips."), Translate("\n\nThe method will now abort."), Translate("\n\nIf this issue persists, please contact Hamilton Service."));
        dialogHandle_10.ShowOutput(Translate("Error Picking Up Tips"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        abort;
      }   /* end if from skip handler if no error */
    }
  }
  MECC::TraceComment(Translate("END TIP PICKUP ERROR HANDLING"));
}

function SetHHSTemperature( variable var_HHS_ID, variable var_Temperature ) void {
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  SetHHSTemperature <<<<<<<<<<"));
  HSLHamHeaterShaker::StopTempCtrl(var_HHS_ID);
  if (var_Temperature != 0)
  {
    Trace ("***** HHS number ", var_HHS_ID, " is being set to ", var_Temperature, "C");
    HSLHamHeaterShaker::StartTempCtrl(var_HHS_ID, var_Temperature, 0);
  }
  else
  {
    Trace ("***** HHS number ", var_HHS_ID, " is not being controlled, as it is desired to be at room temperature.");
  }
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  SetHHSTemperature <<<<<<<<<<"));
}

private function TipPickupWithErrorHandling( sequence & seq_tipsForPickup ) void {
  onerror goto errLabel_16 ;
  err.Clear();
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  errLabel_16 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    ErrorHandling_TipPickup(seq_tipsForPickup);
  }   /* end if from skip handler if no error */
}
