#include "Post-Selection PCR and clean-up.24 samples.res"
global device ML_STAR ("Post-Selection PCR and clean-up.24 samples.lay", "ML_STAR", hslTrue);
global device HxFan ("Post-Selection PCR and clean-up.24 samples.lay", "HxFan", hslTrue);
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_Device_Controllers.hs_" }
 namespace _Method { #include "NIST\\Libraries\\NIST_TruSeqNano_Prep.hs_" }
variable dead_volume[];
variable loopCounter1;
variable vol;
variable primer_vol;
variable MM_vol;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    NIST_DEVICE_CONTROLLERS::_InitLibrary();
    NIST_TRUSEQNANO_PREP::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    StartUp();
    MECC::TraceComment(Translate("Pipette water into epi tubes, various volumes for testing"));
    dead_volume.SetSize(0);
    vol = 20;
    {
      for(loopCounter1 = 0; loopCounter1 < 8;)
      {
        loopCounter1 = loopCounter1 + 1;
        dead_volume.AddAsLast(vol);
        TrcTrace4(Translate("Channel "), loopCounter1, Translate(" dead volume: "), vol);
        vol = vol + 20;
      }
    }
    MECC::TraceComment(Translate("To primer tubes"));
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    MECC::TraceComment(Translate("To MM tubes"));
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    primer_vol = 40;
    MECC::TraceComment(Translate("Add constant volume to primer tubes"));
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    MM_vol = 350;
    MECC::TraceComment(Translate("Add constant volume to MM tubes"));
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    CleanUp();
    NIST_DEVICE_CONTROLLERS::_ExitLibrary();
    NIST_TRUSEQNANO_PREP::_ExitLibrary();
  } }
