private function CleanUp(  ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function StartUp(  ) void {
  private dialog customDialog_1;
  private dialog customDialog_2;
  private dialog customDialog_3;
  private dialog customDialog_4;
  private dialog customDialog_5;
  private dialog customDialog_6;
  private dialog customDialog_7;
  private dialog customDialog_8;
  private dialog customDialog_9;
  private dialog customDialog_10;
  private dialog customDialog_11;
  private dialog customDialog_12;
  private dialog customDialog_13;
  private dialog customDialog_14;
  private dialog customDialog_15;
  private variable loopCounter8;
  private variable bln_Global_SimulatorMode;
  private variable is_bead_ratio_test_exp;
  private variable use_manual_thermocycler;
  private variable HHS3;
  private variable lacI_str;
  private variable ramR_str;
  private variable str_Global_ODTCIPAddress;
  private variable SetTempCPAC;
  private variable ratio_2_str;
  private variable ODTC;
  private variable real_or_test_str;
  private variable is_ramR_experiment;
  private variable is_pipetting;
  private variable prep_mm_and_primers_first;
  private variable ratio_1_1_str;
  private variable ramR_ratio_2;
  private variable is_lacI_experiment;
  private variable SetTempHHS3;
  private variable ratio_1_2_str;
  private variable use_ODTC;
  private variable confirm_str;
  private variable no_resp;
  private variable is_time_point_1;
  private variable is_running_ODTC;
  private variable is_time_point_2;
  private variable lacI_ratio_2;
  private variable lacI_ratio_1_1;
  private variable not_primer_test;
  private variable is_time_point_3;
  private variable thermocycle_str;
  private variable var_Global_HHSNode3;
  private variable lacI_ratio_1_2;
  private variable time_point;
  private variable is_time_point_4;
  private variable ramR_ratio_1_1;
  private variable time_point_str;
  private variable user_choice;
  private variable ramR_ratio_1_2;
  private variable is_primer_test;
  private variable bead_ratio_test_arr_1_2[];
  private variable bead_ratio_test_arr_2[];
  MECC::TraceComment(Translate("***************************************************************************\nStartUp() submethod\n***************************************************************************"));
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  TipCount::Edit2(ML_STAR.MlStar50ulTipWithFilter, "tip_counter_50", ML_STAR, 300);
  TipCount::Edit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, "tip_counter_300", ML_STAR, 300);
  TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, "tip_counter_1000", ML_STAR, 300);
}

private function CleanUp(  ) void {
  private variable bln_Global_SimulatorMode;
  private variable HHS3;
  private variable ODTC;
  private variable time_point;
  MECC::TraceComment(Translate("***************************************************************************\nCleanUp() submethod\n***************************************************************************"));
  TipCount::Write2(ML_STAR.MlStar50ulTipWithFilter, "tip_counter_50", ML_STAR);
  TipCount::Write2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, "tip_counter_300", ML_STAR);
  TipCount::Write2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, "tip_counter_1000", ML_STAR);
}
