 namespace _Method { #include "Common\\iSWAP-PlateAndLidMovement.hs_" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_Device_Controllers.hs_" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_TruSeqNano_Prep.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
#include "Post-Selection PCR and clean-up.24 samples.res"
variable bln_Global_SimulatorMode;
variable HHS3;
variable pipette_volume;
variable loopCounter3;
variable loopCounter5;
variable loopCounter1;
variable loopCounter2;
variable loopCounter6;
variable is_debugging;
global device ML_STAR ("Post-Selection PCR and clean-up.24 samples.lay", "ML_STAR", hslTrue);
global device HxFan ("Post-Selection PCR and clean-up.24 samples.lay", "HxFan", hslTrue);
variable sample_volume;
variable bead_ratio;
variable bead_volume;
variable mix_volume;
timer magnet_timer;
timer timer2;
timer timer3;
variable time_point;
variable elution_vol;
variable bln_Global_SkipAllTimers;
variable timer_2_min;
variable timer_5_min;
variable timer_3_min;
variable user_choice;
variable loopCounter4;
variable sample_mix_volume;
variable timer_10_sec;
variable timer_4_min;
variable time_lid_move;
variable is_pipetting;
variable is_ramR_experiment;
variable is_lacI_experiment;
variable lacI_ratio_1_1;
variable ramR_ratio_1_1;
variable lacI_ratio_1_2;
variable ramR_ratio_1_2;
variable lacI_ratio_2;
variable ramR_ratio_2;
variable lacI_str;
variable ratio_1_1_str;
variable ratio_1_2_str;
variable ratio_2_str;
variable ramR_str;
variable confirm_str;
variable time_point_str;
variable bead_ratio_arr[];
variable bead_ratio_test_arr_1_2[];
variable bead_ratio_test_arr_2[];
variable loopCounter7;
variable bead_volume_arr[];
variable sample_mix_vol_arr[];
variable timer_7_min;
variable timer_1_min;
variable is_bead_ratio_test_exp;
variable SetTempHHS3;
variable var_Global_HHSNode3;
variable is_water_test;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ISWAP_PLATEANDLIDMOVEMENT::_InitLibrary();
    NIST_DEVICE_CONTROLLERS::_InitLibrary();
    NIST_TRUSEQNANO_PREP::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    bln_Global_SimulatorMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    is_debugging = "true";
    is_water_test = "true";
    bln_Global_SkipAllTimers = 0;
    is_pipetting = "true";
    if (bln_Global_SimulatorMode == 1)
    {
      bln_Global_SkipAllTimers = 1;
    }
    if (bln_Global_SkipAllTimers == 1)
    {
      timer_1_min = 1;
      timer_2_min = 1;
      timer_3_min = 1;
      timer_4_min = 1;
      timer_5_min = 1;
      timer_7_min = 1;
      timer_10_sec = 1;
    }
    else
    {
      timer_1_min = 60;
      timer_2_min = 120;
      timer_3_min = 180;
      timer_4_min = 240;
      timer_5_min = 300;
      timer_7_min = 420;
      timer_10_sec = 10;
    }
    StartUp();
    MECC::TraceComment(Translate("=======================================================\nAdd samples to PCR plate and dilute with 10 uL DI water\n======================================================="));
    if (is_pipetting == "true")
    {
      MECC::TraceComment(Translate("***************************************************************************\nAdd sample DNA and DI water to PCR plate\n***************************************************************************"));
      if (is_debugging == "true")
      {
        DebuggingPause();
      }
      MECC::TraceComment(Translate("****** Sample DNA ******"));
      if (is_debugging == "true")
      {
        DebuggingPause();
      }
      MECC::TraceComment(Translate("****** DI water ******"));
    }
    MECC::TraceComment(Translate("=======================================================\nFirst PCR Step\n======================================================="));
    MECC::TraceComment(Translate("***************************************************************************\nAdd Master mix with Primers to PCR plate\n***************************************************************************"));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (is_pipetting == "true")
    {
      pipette_volume = 28.125;
      pipette_volume = pipette_volume * 2;
      pipette_volume = pipette_volume + 45;
      mix_volume = 70;
      MECC::TraceComment(Translate("***** water instead of F and R primers *****"));
      {
        loopCounter6 = 0;
        ML_STAR.PCR_Plate_1.SetCurrentPosition(1);
        while (
           (ML_STAR.PCR_Plate_1.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.PCR_Plate_1, 1);
          loopCounter6 = loopCounter6 + 1;
          TipPickupWithErrorHandling(ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (ML_STAR.PCR_Plate_1.GetCurrentPosition() > 0 && ML_STAR.PCR_Plate_1.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.PCR_Plate_1.SetMax(ML_STAR.PCR_Plate_1.GetTotal());
        ML_STAR.PCR_Plate_1.SetCurrentPosition(1);
      }
    }
    MECC::TraceComment(Translate("***************************************************************************\nFirst PCR clean-up;\nAdd beads to Midi plate\nFinish PCR; Remove lid from PCR_Plate;\nbind plasmid DNA to the beads and keep the supernatant\n***************************************************************************"));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    sample_volume = 90;
    bead_ratio = 0.6;
    if (is_lacI_experiment == 1)
    {
      bead_ratio = lacI_ratio_1_1;
    }
    if (is_ramR_experiment == 1)
    {
      bead_ratio = ramR_ratio_1_1;
    }
    if (is_bead_ratio_test_exp == 1)
    {
      bead_ratio = 0.6;
    }
    TrcTrace4(Translate("************ Pipetting beads with ratio: "), bead_ratio, Translate(" ******************"), Translate(""));
    bead_volume = bead_ratio * sample_volume;
    sample_mix_volume = sample_volume + bead_volume;
    sample_mix_volume = sample_mix_volume * 0.75;
    if (sample_mix_volume > 300)
    {
      sample_mix_volume = 300;
    }
    Add_AmpureSingle(ML_STAR.Bead_Stock, ML_STAR.Midi_on_HHS_1, bead_volume, 0, 0, Translate("1_1"));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    MECC::TraceComment(Translate("=================================================\nShake Midi plate for ten seconds to resuspend beads;\nTransfer samples from PCR plate to Midi plate; \nMix by pipetting 10x;\nand incubate seven additional minutes without shaking\n================================================="));
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
      HSLHamHeaterShaker::StartShaker(HHS3, 1800);
    }
    MECC::TraceComment(Translate("***** Now shaking at RT for 10s ......."));
    if( 0 == timer3.SetTimer(timer_10_sec) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 10 sec shaking timer ****"));
    if( 0 == timer3.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::StopShaker(HHS3);
    }
    if (is_pipetting == "true")
    {
      HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
      {
        loopCounter4 = 0;
        ML_STAR.Midi_on_HHS_1.SetCurrentPosition(1);
        ML_STAR.PCR_Plate_1.SetCurrentPosition(1);
        while (
           (ML_STAR.Midi_on_HHS_1.GetCurrentPosition() > 0)
        && (ML_STAR.PCR_Plate_1.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.Midi_on_HHS_1, 1, ML_STAR.PCR_Plate_1, 1);
          loopCounter4 = loopCounter4 + 1;
          TipPickupWithErrorHandling(ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (ML_STAR.Midi_on_HHS_1.GetCurrentPosition() > 0 && ML_STAR.Midi_on_HHS_1.GetMax() == 0 )
          && (ML_STAR.PCR_Plate_1.GetCurrentPosition() > 0 && ML_STAR.PCR_Plate_1.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.Midi_on_HHS_1.SetMax(ML_STAR.Midi_on_HHS_1.GetTotal());
        ML_STAR.PCR_Plate_1.SetMax(ML_STAR.PCR_Plate_1.GetTotal());
        ML_STAR.Midi_on_HHS_1.SetCurrentPosition(1);
        ML_STAR.PCR_Plate_1.SetCurrentPosition(1);
      }
      HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    }
    MECC::TraceComment(Translate("***** Now incubating at RT for 7 min ......."));
    if( 0 == timer2.SetTimer(timer_7_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 5 minute timer for RT incubation ****"));
    if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    MECC::TraceComment(Translate("***** Incubation finished..."));
    MECC::TraceComment(Translate("=======================================================\nMove Midi plate to magnet, incubate 3 minutes,\nthen transfer supernatant to columns 4-6 in Midi plate;\nincubate 5 more minutes; then transfer supernatant to columns 7-9 in Midi plate\nmove Midi plate to HHS\n======================================================="));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("**** on magnet..."));
    if( 0 == magnet_timer.SetTimer(timer_3_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 3 minute timer for magnet ****"));
    if( 0 == magnet_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** done."));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (is_pipetting == "true")
    {
      pipette_volume = sample_volume + bead_volume;
      {
        loopCounter4 = 0;
        ML_STAR.Midi_on_magnet_1.SetCurrentPosition(1);
        ML_STAR.Midi_on_magnet_2.SetCurrentPosition(1);
        while (
           (ML_STAR.Midi_on_magnet_1.GetCurrentPosition() > 0)
        && (ML_STAR.Midi_on_magnet_2.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.Midi_on_magnet_1, 1, ML_STAR.Midi_on_magnet_2, 1);
          loopCounter4 = loopCounter4 + 1;
          TipPickupWithErrorHandling(ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (ML_STAR.Midi_on_magnet_1.GetCurrentPosition() > 0 && ML_STAR.Midi_on_magnet_1.GetMax() == 0 )
          && (ML_STAR.Midi_on_magnet_2.GetCurrentPosition() > 0 && ML_STAR.Midi_on_magnet_2.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.Midi_on_magnet_1.SetMax(ML_STAR.Midi_on_magnet_1.GetTotal());
        ML_STAR.Midi_on_magnet_2.SetMax(ML_STAR.Midi_on_magnet_2.GetTotal());
        ML_STAR.Midi_on_magnet_1.SetCurrentPosition(1);
        ML_STAR.Midi_on_magnet_2.SetCurrentPosition(1);
      }
    }
    MECC::TraceComment(Translate("**** 4 minute timer for magnet ****"));
    if( 0 == magnet_timer.SetTimer(timer_4_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == magnet_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** Second supernatant transfer to make sure all beads are stuck to magnet"));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (is_pipetting == "true")
    {
      pipette_volume = pipette_volume - 10;
      {
        loopCounter4 = 0;
        ML_STAR.Midi_on_magnet_2.SetCurrentPosition(1);
        ML_STAR.Midi_on_magnet_3.SetCurrentPosition(1);
        while (
           (ML_STAR.Midi_on_magnet_2.GetCurrentPosition() > 0)
        && (ML_STAR.Midi_on_magnet_3.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.Midi_on_magnet_2, 1, ML_STAR.Midi_on_magnet_3, 1);
          loopCounter4 = loopCounter4 + 1;
          TipPickupWithErrorHandling(ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (ML_STAR.Midi_on_magnet_2.GetCurrentPosition() > 0 && ML_STAR.Midi_on_magnet_2.GetMax() == 0 )
          && (ML_STAR.Midi_on_magnet_3.GetCurrentPosition() > 0 && ML_STAR.Midi_on_magnet_3.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.Midi_on_magnet_2.SetMax(ML_STAR.Midi_on_magnet_2.GetTotal());
        ML_STAR.Midi_on_magnet_3.SetMax(ML_STAR.Midi_on_magnet_3.GetTotal());
        ML_STAR.Midi_on_magnet_2.SetCurrentPosition(1);
        ML_STAR.Midi_on_magnet_3.SetCurrentPosition(1);
      }
    }
    MECC::TraceComment(Translate("**** Move plate to HHS"));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_magnet, ML_STAR.Midi_on_HHS, 1, 1, ML_STAR);
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
    }
    MECC::TraceComment(Translate("=====================================================================\nNext step: bind PCR product to beads and discard the supernatant\n====================================================================="));
    bead_ratio = 0.6;
    if (is_lacI_experiment == 1)
    {
      bead_ratio = lacI_ratio_1_2;
    }
    if (is_ramR_experiment == 1)
    {
      bead_ratio = ramR_ratio_1_2;
    }
    TrcTrace4(Translate("************ Pipetting beads with ratio: "), bead_ratio, Translate(" ******************"), Translate(""));
    bead_volume = bead_ratio * pipette_volume;
    sample_mix_volume = pipette_volume + bead_volume;
    sample_mix_volume = sample_mix_volume * 0.9;
    if (sample_mix_volume > 300)
    {
      sample_mix_volume = 300;
    }
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    Add_AmpureSingle(ML_STAR.Bead_Stock, ML_STAR.Midi_on_HHS_3, bead_volume, 1, sample_mix_volume, Translate("1_2"));
    MECC::TraceComment(Translate("***** Now incubating at RT for 7 min ......."));
    if( 0 == timer2.SetTimer(timer_7_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 7 minute timer for RT incubation ****"));
    if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("***** Incubation finished..."));
    MECC::TraceComment(Translate("=======================================================\nMove Midi plate to magnet, incubate 5 minutes,\nthen discard the supernatant\n======================================================="));
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("**** on magnet..."));
    if( 0 == magnet_timer.SetTimer(timer_5_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 5 minute timer for magnet ****"));
    if( 0 == magnet_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** done."));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (is_pipetting == "true")
    {
      pipette_volume = pipette_volume + bead_volume;
      pipette_volume = pipette_volume - 5;
      Transfer_PlatetoWaste(ML_STAR.Midi_on_magnet_3, pipette_volume, Translate("Nano_SVF_EthanolWaste_JetEmpty_HigherAirTransport"));
    }
    MECC::TraceComment(Translate("===============================================================================\nEthanol rinse (1x), then resuspend sample in elution buffer, put plate on magnet, and wait 5 minutes\n==============================================================================="));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    EthanolStep(ML_STAR.Midi_on_magnet_3, ML_STAR.Ethanol_85, 35, ML_STAR.DI_Water, ML_STAR.Midi_on_HHS_3);
    MECC::TraceComment(Translate("==================================================================================================================================\nRemove lid from Reagent_Plate and Move midi to Magnet\n=================================================================================================================================="));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 1, 1, ML_STAR);
    if( 0 == magnet_timer.SetTimer(timer_5_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("***************************************************************************\nRemove lid from PCR_Plate; and prep plate for Second PCR\n***************************************************************************"));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    MECC::TraceComment(Translate("**** Prep PCR plate 2 ***"));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (is_pipetting == "true")
    {
      pipette_volume = 36;
      {
        loopCounter1 = 0;
        ML_STAR.PCR_Plate_2.SetCurrentPosition(1);
        while (
           (ML_STAR.PCR_Plate_2.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.PCR_Plate_2, 1);
          loopCounter1 = loopCounter1 + 1;
          TipPickupWithErrorHandling(ML_STAR.MlStar50ulTipWithFilter);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (ML_STAR.PCR_Plate_2.GetCurrentPosition() > 0 && ML_STAR.PCR_Plate_2.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.PCR_Plate_2.SetMax(ML_STAR.PCR_Plate_2.GetTotal());
        ML_STAR.PCR_Plate_2.SetCurrentPosition(1);
      }
    }
    MECC::TraceComment(Translate("==============================================================================\nWait for 5 minute magnet timer to finish, then pipette supernatant from Midi plate to new PCR plate\n=============================================================================="));
    MECC::TraceComment(Translate("**** 5 minute timer for magnet ****"));
    if( 0 == magnet_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (is_pipetting == "true")
    {
      pipette_volume = 30;
      mix_volume = 50;
      {
        loopCounter4 = 0;
        ML_STAR.Midi_on_magnet_3.SetCurrentPosition(1);
        ML_STAR.PCR_Plate_2.SetCurrentPosition(1);
        while (
           (ML_STAR.Midi_on_magnet_3.GetCurrentPosition() > 0)
        && (ML_STAR.PCR_Plate_2.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.Midi_on_magnet_3, 1, ML_STAR.PCR_Plate_2, 1);
          loopCounter4 = loopCounter4 + 1;
          TipPickupWithErrorHandling(ML_STAR.MlStar50ulTipWithFilter);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (ML_STAR.Midi_on_magnet_3.GetCurrentPosition() > 0 && ML_STAR.Midi_on_magnet_3.GetMax() == 0 )
          && (ML_STAR.PCR_Plate_2.GetCurrentPosition() > 0 && ML_STAR.PCR_Plate_2.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.Midi_on_magnet_3.SetMax(ML_STAR.Midi_on_magnet_3.GetTotal());
        ML_STAR.PCR_Plate_2.SetMax(ML_STAR.PCR_Plate_2.GetTotal());
        ML_STAR.Midi_on_magnet_3.SetCurrentPosition(1);
        ML_STAR.PCR_Plate_2.SetCurrentPosition(1);
      }
    }
    MECC::TraceComment(Translate("***************************************************************************\nReplace lid on PCR_Plate;\nmove Midi plate to HHS; then put lid back on reagent plate\n***************************************************************************"));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_magnet, ML_STAR.Midi_on_HHS, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("***************************************************************************\nReplace lid on Reagent_Plate\n***************************************************************************"));
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
    }
    MECC::TraceComment(Translate("***************************************************************************\nSecond PCR clean-up;\nMove Midi to HHS;\nAdd beads to Midi plate\nFinish PCR; Remove lid from PCR_Plate;\nbind PCR product to the beads and discard the supernatant\n***************************************************************************"));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    sample_volume = 60;
    bead_ratio = 1.0;
    if (is_lacI_experiment == 1)
    {
      bead_ratio = lacI_ratio_2;
    }
    if (is_ramR_experiment == 1)
    {
      bead_ratio = ramR_ratio_2;
    }
    if (is_bead_ratio_test_exp == 1)
    {
      bead_ratio_arr=bead_ratio_test_arr_2;
      bead_volume_arr.SetSize(0);
      sample_mix_vol_arr.SetSize(0);
      {
        for(loopCounter7 = 0; loopCounter7 < 4;)
        {
          loopCounter7 = loopCounter7 + 1;
          bead_ratio = bead_ratio_arr.ElementAt( loopCounter7 -1);
          bead_volume = bead_ratio * sample_volume;
          sample_mix_volume = sample_volume + bead_volume;
          sample_mix_volume = sample_mix_volume * 0.75;
          if (sample_mix_volume > 300)
          {
            sample_mix_volume = 300;
          }
          bead_volume_arr.AddAsLast(bead_volume);
          sample_mix_vol_arr.AddAsLast(sample_mix_volume);
        }
      }
      TrcTrace8(Translate("******************* Test: pipetting beads with ratios: "), bead_ratio_arr.ElementAt( 1 -1), Translate(", "), bead_ratio_arr.ElementAt( 2 -1), Translate(", "), bead_ratio_arr.ElementAt( 3 -1), Translate(", "), bead_ratio_arr.ElementAt( 4 -1));
    }
    else
    {
      TrcTrace4(Translate("************ Pipetting beads with ratio: "), bead_ratio, Translate(" ******************"), Translate(""));
      bead_volume = bead_ratio * sample_volume;
      sample_mix_volume = sample_volume + bead_volume;
      sample_mix_volume = sample_mix_volume * 0.75;
      if (sample_mix_volume > 300)
      {
        sample_mix_volume = 300;
      }
    }
    Add_AmpureSingle(ML_STAR.Bead_Stock, ML_STAR.Midi_on_HHS_4, bead_volume, 0, 0, Translate("2"));
    MECC::TraceComment(Translate("=================================================\nShake midi plate for 10 seconds to resuspend beads;\nTransfer samples from PCR plate to Midi plate;\nMix by pipetting 10x;\nand incubate 5 additional minutes without shaking\n================================================="));
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
      HSLHamHeaterShaker::StartShaker(HHS3, 1800);
    }
    MECC::TraceComment(Translate("***** Now shaking at RT for 10s ......."));
    if( 0 == timer3.SetTimer(timer_10_sec) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 10 sec shaking timer ****"));
    if( 0 == timer3.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::StopShaker(HHS3);
    }
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (is_pipetting == "true")
    {
      HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
      {
        loopCounter4 = 0;
        ML_STAR.Midi_on_HHS_4.SetCurrentPosition(1);
        ML_STAR.PCR_Plate_2.SetCurrentPosition(1);
        while (
           (ML_STAR.Midi_on_HHS_4.GetCurrentPosition() > 0)
        && (ML_STAR.PCR_Plate_2.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.Midi_on_HHS_4, 1, ML_STAR.PCR_Plate_2, 1);
          loopCounter4 = loopCounter4 + 1;
          TipPickupWithErrorHandling(ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (ML_STAR.Midi_on_HHS_4.GetCurrentPosition() > 0 && ML_STAR.Midi_on_HHS_4.GetMax() == 0 )
          && (ML_STAR.PCR_Plate_2.GetCurrentPosition() > 0 && ML_STAR.PCR_Plate_2.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.Midi_on_HHS_4.SetMax(ML_STAR.Midi_on_HHS_4.GetTotal());
        ML_STAR.PCR_Plate_2.SetMax(ML_STAR.PCR_Plate_2.GetTotal());
        ML_STAR.Midi_on_HHS_4.SetCurrentPosition(1);
        ML_STAR.PCR_Plate_2.SetCurrentPosition(1);
      }
      HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    }
    MECC::TraceComment(Translate("***** Now incubating at RT for 7 min ......."));
    if( 0 == timer2.SetTimer(timer_7_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 7 minute timer for RT incubation ****"));
    if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("***** Incubation finished..."));
    MECC::TraceComment(Translate("=======================================================\nMove Midi plate to magnet, incubate 4 minutes,\nthen discard supernatant;\n======================================================="));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("**** on magnet..."));
    if( 0 == magnet_timer.SetTimer(timer_5_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 5 minute timer for magnet ****"));
    if( 0 == magnet_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** done."));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (is_pipetting == "true")
    {
      pipette_volume = sample_volume + bead_volume;
      pipette_volume = pipette_volume - 5;
      Transfer_PlatetoWaste(ML_STAR.Midi_on_magnet_4, pipette_volume, Translate("Nano_SVF_EthanolWaste_JetEmpty_HigherAirTransport"));
    }
    MECC::TraceComment(Translate("===============================================================================\nEthanol rinse (1x), then resuspend sample in elution buffer, put plate on magnet, and wait 5 minutes\n==============================================================================="));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    elution_vol = 50;
    EthanolStep(ML_STAR.Midi_on_magnet_4, ML_STAR.Ethanol_70, elution_vol, ML_STAR.Elution_Buffer, ML_STAR.Midi_on_HHS_4);
    MECC::TraceComment(Translate("==================================================================================================================================\nMove to Magnet\n=================================================================================================================================="));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 1, 1, ML_STAR);
    if( 0 == magnet_timer.SetTimer(timer_5_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    time_lid_move = timer_5_min - 30;
    if (time_lid_move < 2)
    {
      time_lid_move = 2;
    }
    MECC::TraceComment(Translate("==============================================================================\nWait for 5 minute magnet timer to finish, then pipette supernatant from Midi plate to new Pooling plate\n=============================================================================="));
    MECC::TraceComment(Translate("**** 5 minute timer for magnet ****"));
    if( 0 == magnet_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (is_pipetting == "true")
    {
      MECC::TraceComment(Translate("***************************************************************************\nPool Cleaned up PCR samples into 8 wells of Pooling_Plate\n***************************************************************************"));
      if (is_debugging == "true")
      {
        DebuggingPause();
      }
      pipette_volume = elution_vol - 5;
      HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
      {
        loopCounter5 = 0;
        ML_STAR.Midi_on_magnet_4.SetCurrentPosition(1);
        ML_STAR.No_pooling_1.SetCurrentPosition(1);
        while (
           (ML_STAR.Midi_on_magnet_4.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.Midi_on_magnet_4, 1, ML_STAR.No_pooling_1, 1);
          loopCounter5 = loopCounter5 + 1;
          TipPickupWithErrorHandling(ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (ML_STAR.Midi_on_magnet_4.GetCurrentPosition() > 0 && ML_STAR.Midi_on_magnet_4.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.Midi_on_magnet_4.SetMax(ML_STAR.Midi_on_magnet_4.GetTotal());
        ML_STAR.No_pooling_1.SetMax(ML_STAR.No_pooling_1.GetTotal());
        ML_STAR.Midi_on_magnet_4.SetCurrentPosition(1);
        ML_STAR.No_pooling_1.SetCurrentPosition(1);
      }
      HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    }
    CleanUp();
    ISWAP_PLATEANDLIDMOVEMENT::_ExitLibrary();
    NIST_DEVICE_CONTROLLERS::_ExitLibrary();
    NIST_TRUSEQNANO_PREP::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
  } }
