 namespace _Method { #include "Common\\iSWAP-PlateAndLidMovement.hs_" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_Device_Controllers.hs_" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_TruSeqNano_Prep.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "STAR Tools\\STAR Tip Tools.hs_" }
#include "BarSeq prep.96 samples.res"
variable bln_Global_SimulatorMode;
variable ODTC;
variable odtc_script_path;
variable odtc_script_time;
variable odtc_script_id;
variable var_Global_HHSNode3;
variable HHS3;
variable SetTempHHS3;
variable is_debugging;
variable pcr_time;
variable pipetting_time;
variable wait_time;
timer timer1;
timer magnet_timer;
timer timer2;
timer timer3;
variable bln_Global_SkipAllTimers;
variable timer_2_min;
variable timer_5_min;
variable timer_3_min;
variable user_choice;
variable Bead_stock_volume;
variable Beads_used;
variable timer_10_sec;
variable timer_4_min;
variable time_lid_move;
timer lid_move_timer;
variable is_pipetting;
variable lacI_ratio_1_1;
variable lacI_ratio_1_2;
variable lacI_ratio_2;
variable is_running_ODTC;
variable use_ODTC;
dialog customDialog_1;
dialog customDialog_2;
dialog customDialog_3;
dialog customDialog_4;
variable timer_7_min;
variable timer_1_min;
variable flt_PCR1_ElutionVol;
variable flt_PCR1_CleanupVol;
variable flt_PCR2_RxVol;
variable flt_PCR2_ElutionVol;
variable is_pipetting_only;
variable flt_plasmid_volume;
variable flt_di_water_volume;
variable flt_test_plasmid_vol;
variable flt_primer_volume;
variable flt_primer_mix_vol;
variable flt_primer_test_vol;
variable flt_bead_ratio_1_1;
variable flt_post_PCR1_1_mix_vol;
variable flt_post_PCR1_1_sample_vol;
variable flt_post_PCR1_1_bead_vol;
variable flt_post_PCR1_1_samp_bead_vol;
variable flt_bead_ratio_1_2;
variable flt_post_PCR1_2_bead_vol;
variable flt_post_PCR1_2_mix_vol;
variable flt_post_PCR1_2_waste_vol;
variable flt_PCR2_MM_volume;
variable flt_PCR2_mix_vol;
variable flt_post_PCR2_sample_vol;
variable flt_bead_ratio_2;
variable flt_post_PCR2_bead_vol;
variable flt_post_PCR2_mix_vol;
variable flt_post_PCR2_waste_vol;
variable flt_final_sample_volume;
global device ML_STAR ("BarSeq prep.96 samples.lay", "ML_STAR", hslTrue);
global device HxFan ("BarSeq prep.96 samples.lay", "HxFan", hslTrue);
timer timer_for_elution;
sequence plasmid_input_arr[];
sequence pcr_plate_1_arr[];
variable int_time_point;
dialog customDialog_5;
variable str_load_plas;
variable str_time_point;
variable timer_30_sec;
dialog customDialog_6;
dialog customDialog_7;
dialog customDialog_8;
dialog customDialog_9;
dialog customDialog_10;
dialog customDialog_11;
dialog customDialog_12;
dialog customDialog_13;
dialog customDialog_14;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ISWAP_PLATEANDLIDMOVEMENT::_InitLibrary();
    NIST_DEVICE_CONTROLLERS::_InitLibrary();
    NIST_TRUSEQNANO_PREP::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    STAR_TIP_TOOLS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    bln_Global_SimulatorMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    is_debugging = "true";
    StartUp();
    MECC::TraceComment(Translate("***************************************************************************\nFirst PCR clean-up;\nAdd beads to Midi plate\nFinish PCR; Remove lid from PCR_Plate_1;\nbind plasmid DNA to the beads and keep the supernatant\n***************************************************************************"));
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
      HSLHamHeaterShaker::StartShaker(HHS3, 300);
    }
    MECC::TraceComment(Translate("***** Now shaking at RT for 10s ......."));
    if( 0 == timer3.SetTimer(5) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 5 sec shaking timer ****"));
    if( 0 == timer3.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::StopShaker(HHS3);
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
    }
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    MECC::TraceComment(Translate("=================================================\nShake Midi plate for ten seconds to resuspend beads;\nTransfer samples from PCR plate to Midi plate; \nMix by pipetting 10x;\nand incubate seven additional minutes without shaking\n================================================="));
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
      HSLHamHeaterShaker::StartShaker(HHS3, 1800);
    }
    MECC::TraceComment(Translate("***** Now shaking at RT for 10s ......."));
    if( 0 == timer3.SetTimer(timer_10_sec) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 10 sec shaking timer ****"));
    if( 0 == timer3.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::StopShaker(HHS3);
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    MECC::TraceComment(Translate("***** Incubation finished..."));
    MECC::TraceComment(Translate("=======================================================\nMove Midi plate to magnet, incubate 4 minutes, get new Midi plate from stack\nthen transfer supernatant to new Midi plate on HHS\n======================================================="));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("**** on magnet..."));
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.ABGENE_MIDI_stack_0002, ML_STAR.Midi_on_HHS, 1, 1, ML_STAR);
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
    }
    MECC::TraceComment(Translate("**** done."));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    MECC::TraceComment(Translate("=====================================================================\nNext step: bind PCR product to beads and discard the supernatant\n====================================================================="));
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_magnet, ML_STAR.MIDI_Waste, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("=======================================================\nMove Midi plate to magnet, incubate 5 minutes,\nthen discard the supernatant\n======================================================="));
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("**** on magnet..."));
    MECC::TraceComment(Translate("**** done."));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    MECC::TraceComment(Translate("===============================================================================\nEthanol rinse (1x), then resuspend sample in elution buffer, put plate on magnet, and wait 5 minutes\n==============================================================================="));
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_magnet, ML_STAR.Midi_on_HHS, 0, 1, ML_STAR);
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
    }
    MECC::TraceComment(Translate("==================================================================================================================================\nRemove lid from Reagent_Plate and Move midi to Magnet\n=================================================================================================================================="));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("***************************************************************************\nWhile 2nd PCR is running:\nthrow Midi plate to waste; \nput lid back on reagent plate; \nmove new midi plate to HHS (from stack);\nand move BarSeq_Output_Plate to pipetting position.\n***************************************************************************"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_magnet, ML_STAR.MIDI_Waste, 0, 1, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.ABGENE_MIDI_stack_0001, ML_STAR.Midi_on_HHS, 1, 1, ML_STAR);
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
    }
    MECC::TraceComment(Translate("***************************************************************************\nSecond PCR clean-up;\nAdd beads to Midi plate on HHS\nFinish PCR; Remove lid from PCR_Plate;\nbind PCR product to the beads and discard the supernatant\n***************************************************************************"));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    MECC::TraceComment(Translate("=================================================\nShake midi plate for 10 seconds to resuspend beads;\nTransfer samples from PCR plate to Midi plate;\nMix by pipetting 10x;\nand incubate 5 additional minutes without shaking\n================================================="));
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
      HSLHamHeaterShaker::StartShaker(HHS3, 1800);
    }
    MECC::TraceComment(Translate("***** Now shaking at RT for 10s ......."));
    if( 0 == timer3.SetTimer(timer_10_sec) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 10 sec shaking timer ****"));
    if( 0 == timer3.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::StopShaker(HHS3);
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
    }
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    MECC::TraceComment(Translate("=======================================================\nMove Midi plate to magnet, incubate 5 minutes,\nthen discard supernatant;\n======================================================="));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("**** on magnet..."));
    MECC::TraceComment(Translate("**** done."));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    MECC::TraceComment(Translate("===============================================================================\nEthanol rinse (1x), then resuspend sample in elution buffer, put plate on magnet, and wait 5 minutes\n==============================================================================="));
    MECC::TraceComment(Translate("==================================================================================================================================\nMove to Magnet\n=================================================================================================================================="));
    if (is_debugging == "true")
    {
      DebuggingPause();
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_magnet, ML_STAR.Midi_on_HHS, 0, 1, ML_STAR);
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================================\nWait for 5 minute magnet timer to finish, then pipette supernatant from Midi plate to new Pooling plate\n=============================================================================="));
    MECC::TraceComment(Translate("**** 5 minute timer for magnet ****"));
    if (is_pipetting == "true")
    {
    }
    MECC::TraceComment(Translate("***************************************************************************\nReplace lid on Output_Plate\n***************************************************************************"));
    CleanUp();
    ISWAP_PLATEANDLIDMOVEMENT::_ExitLibrary();
    NIST_DEVICE_CONTROLLERS::_ExitLibrary();
    NIST_TRUSEQNANO_PREP::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    STAR_TIP_TOOLS::_ExitLibrary();
  } }
