private function CleanUp(  ) void ;
private function DebuggingPause(  ) void ;
private function Get_Tip_Use_Str( sequence & in_seq ) variable ;
private function Initialize_HHS( variable & var_Local_DeviceID, variable var_Local_Node ) void ;
function SetHHSTemperature( variable var_HHS_ID, variable var_Temperature ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function Initialize_HHS( variable & var_Local_DeviceID, variable var_Local_Node ) void {
  private dialog customDialog_1;
  private variable bln_Local_HHSInitReturn;
  private variable int_Global_ReturnDialog;
  private variable loopCounter20;
  var_Local_DeviceID = 0;
  MECC::TraceComment(Translate("==================================================================================================================================\nInitialize_HHS Start\n=================================================================================================================================="));
  Trace ("==================================================================================================================================");
  Trace ("Initializing HHS Located at Node:  ", var_Local_Node);
  Trace ("==================================================================================================================================");
  {
    loopCounter20 = 0;
    while (1 == 1)
    {
      loopCounter20 = loopCounter20 + 1;
      HSLHamHeaterShaker::SetSimulation(bln_Global_SimulatorMode);
      bln_Local_HHSInitReturn = HSLHamHeaterShaker::CreateUsbDevice(var_Local_Node, var_Local_DeviceID);
      if (bln_Local_HHSInitReturn != 0)
      {
        MECC::TraceComment(Translate("==================================================================================================================================\nFailed to Initialize HHS\n=================================================================================================================================="));
        HSLHamHeaterShaker::Terminate();
        customDialog_1.InitCustomDialog("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");
        customDialog_1.ShowCustomDialog();
        int_Global_ReturnDialog = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
        if (int_Global_ReturnDialog == 2)
        {
          MECC::TraceComment(Translate("==================================================================================================================================\nMethod Aborted\n=================================================================================================================================="));
          abort;
        }
      }
      else
      {
        break;
      }
    }
  }
  MECC::TraceComment(Translate("==================================================================================================================================\nInitialize_HHS Finish\n=================================================================================================================================="));
}

private function CleanUp(  ) void {
  MECC::TraceComment(Translate("***************************************************************************\nCleanUp() submethod\n***************************************************************************"));
  if (bln_Global_SimulatorMode == 0)
  {
    HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    NIST_DEVICE_CONTROLLERS::TerminateHHSs();
    NIST_DEVICE_CONTROLLERS::TerminateODTC(ODTC);
    NIST_DEVICE_CONTROLLERS::TerminateCPAC();
    {
      	HxFan.SetFanSpeed("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"); // SetFanSpeed
    }
  }
  ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
  TipCount::Write2(ML_STAR.MlStar50ulTipWithFilter, "tip_counter_50", ML_STAR);
  TipCount::Write2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, "tip_counter_300", ML_STAR);
  TipCount::Write2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, "tip_counter_1000", ML_STAR);
}

private function StartUp(  ) void {
  MECC::TraceComment(Translate("***************************************************************************\nStartUp() submethod\n***************************************************************************"));
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  if (bln_Global_SimulatorMode == 0)
  {
    var_Global_HHSNode3 = 3;
    SetTempHHS3 = 20;
    Initialize_HHS(HHS3, var_Global_HHSNode3);
    NIST_TRUSEQNANO_PREP::SetHHSTemperature(HHS3, SetTempHHS3);
    HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
  }
}

function SetHHSTemperature( variable var_HHS_ID, variable var_Temperature ) void {
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  SetHHSTemperature <<<<<<<<<<"));
  HSLHamHeaterShaker::StopTempCtrl(var_HHS_ID);
  if (var_Temperature != 0)
  {
    Trace ("***** HHS number ", var_HHS_ID, " is being set to ", var_Temperature, "C");
    HSLHamHeaterShaker::StartTempCtrl(var_HHS_ID, var_Temperature, 0);
  }
  else
  {
    Trace ("***** HHS number ", var_HHS_ID, " is not being controlled, as it is desired to be at room temperature.");
  }
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  SetHHSTemperature <<<<<<<<<<"));
}

private function Get_Tip_Use_Str( sequence & in_seq ) variable {
  private variable num_of_tips_needed;
  private variable tip_str;
  num_of_tips_needed = SeqGetTotal(in_seq);
  tip_str = "11111111";
  if (num_of_tips_needed == 2)
  {
    tip_str = "11000000";
  }
  if (num_of_tips_needed == 4)
  {
    tip_str = "11110000";
  }
  if (num_of_tips_needed == 6)
  {
    tip_str = "00111111";
  }
  return (tip_str);
}

private function DebuggingPause(  ) void {
  private dialog dialogHandle_2;
  dialogHandle_2.SetOutput(Translate("Click 'OK' to continue."));
  dialogHandle_2.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
}
