 namespace _Method { #include "Common\\iSWAP-PlateAndLidMovement.hs_" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_Device_Controllers.hs_" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_TruSeqNano_Prep.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
#include "Post-Selection PCR and clean-up.24 samples.res"
global device ML_STAR ("Post-Selection PCR and clean-up.24 samples.lay", "ML_STAR", hslTrue);
global device HxFan ("Post-Selection PCR and clean-up.24 samples.lay", "HxFan", hslTrue);
dialog dialogHandle_1;
dialog dialogHandle_2;
dialog dialogHandle_3;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ISWAP_PLATEANDLIDMOVEMENT::_InitLibrary();
    NIST_DEVICE_CONTROLLERS::_InitLibrary();
    NIST_TRUSEQNANO_PREP::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_Lid_Parking, 0, 1, ML_STAR);
    dialogHandle_3.SetOutput(Translate("Pause"));
    dialogHandle_3.ShowOutput(Translate("Pause"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_Lid_Parking, ML_STAR.PCR_Plate_lid, 1, 1, ML_STAR);
    if(0){
      ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_lid, 0, 0, ML_STAR);
      ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_lid, 1, 1, ML_STAR);
      ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlateWithLid(ML_STAR.PCR_Plate_move, ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_move, ML_STAR.PCR_Plate_lid, 1, 0, ML_STAR);
    }
    CleanUp();
    ISWAP_PLATEANDLIDMOVEMENT::_ExitLibrary();
    NIST_DEVICE_CONTROLLERS::_ExitLibrary();
    NIST_TRUSEQNANO_PREP::_ExitLibrary();
  } }
