 namespace _Method { #include "Common\\iSWAP-PlateAndLidMovement.hs_" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_Device_Controllers.hs_" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_TruSeqNano_Prep.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
#include "Post-Selection PCR and clean-up.24 samples.res"
variable bln_Global_SimulatorMode;
variable str_Global_ODTCIPAddress;
variable ODTC;
variable odtc_script_path;
variable odtc_script_time;
variable odtc_script_id;
variable var_Global_HHSNode3;
variable HHS3;
variable SetTempHHS3;
variable pipette_volume;
variable loopCounter3;
variable loopCounter5;
variable loopCounter1;
variable loopCounter2;
variable loopCounter6;
variable is_debugging;
dialog dialogHandle_1;
dialog dialogHandle_2;
dialog dialogHandle_3;
dialog dialogHandle_4;
dialog dialogHandle_5;
dialog dialogHandle_6;
dialog dialogHandle_7;
dialog dialogHandle_8;
dialog dialogHandle_9;
dialog dialogHandle_10;
dialog dialogHandle_11;
dialog dialogHandle_12;
dialog dialogHandle_13;
global device ML_STAR ("Post-Selection PCR and clean-up.24 samples.lay", "ML_STAR", hslTrue);
global device HxFan ("Post-Selection PCR and clean-up.24 samples.lay", "HxFan", hslTrue);
sequence Sample_Plate_arr[];
sequence Sample_Plate;
sequence Rev_Primer_arr[];
sequence Rev_Primer;
dialog dialogHandle_14;
dialog dialogHandle_15;
variable sample_volume;
variable bead_ratio;
variable bead_volume;
variable pcr_time;
variable pipetting_time;
variable wait_time;
timer timer1;
variable mix_volume;
variable empty_disp;
timer magnet_timer;
timer timer2;
timer timer3;
variable time_point;
dialog dialogHandle_16;
dialog dialogHandle_17;
dialog dialogHandle_18;
dialog dialogHandle_19;
dialog dialogHandle_20;
dialog dialogHandle_21;
dialog dialogHandle_22;
variable elution_vol;
variable bln_Global_SkipAllTimers;
variable timer_2_min;
variable timer_5_min;
variable timer_3_min;
sequence Pooling_arr[];
sequence Pooling_to;
variable user_choice;
variable loopCounter4;
dialog customDialog_23;
dialog customDialog_24;
dialog customDialog_25;
dialog customDialog_26;
dialog customDialog_27;
dialog customDialog_28;
dialog customDialog_29;
dialog dialogHandle_30;
variable Bead_stock_volume;
variable Beads_used;
dialog dialogHandle_31;
variable sample_mix_volume;
variable timer_10_sec;
variable timer_4_min;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ISWAP_PLATEANDLIDMOVEMENT::_InitLibrary();
    NIST_DEVICE_CONTROLLERS::_InitLibrary();
    NIST_TRUSEQNANO_PREP::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    bln_Global_SimulatorMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    is_debugging = "false";
    bln_Global_SkipAllTimers = 0;
    if (bln_Global_SimulatorMode == 1)
    {
      bln_Global_SkipAllTimers = 1;
    }
    if (bln_Global_SkipAllTimers == 1)
    {
      timer_2_min = 1;
      timer_3_min = 1;
      timer_4_min = 1;
      timer_5_min = 1;
      timer_10_sec = 1;
    }
    else
    {
      timer_2_min = 120;
      timer_3_min = 180;
      timer_4_min = 240;
      timer_5_min = 300;
      timer_10_sec = 10;
    }
    StartUp();
    MECC::TraceComment(Translate("=======================================================\nFirst PCR Step\n======================================================="));
    if(0){
      MECC::TraceComment(Translate("***************************************************************************\nAdd PCR Master Mix to PCR plate\n***************************************************************************"));
      pipette_volume = 45;
      mix_volume = 80;
      {
        loopCounter6 = 0;
        ML_STAR.PCR_Plate_1.SetCurrentPosition(1);
        while (
           (ML_STAR.PCR_Plate_1.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.PCR_Plate_1, 1);
          loopCounter6 = loopCounter6 + 1;
          TipPickupWithErrorHandling(ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (ML_STAR.PCR_Plate_1.GetCurrentPosition() > 0 && ML_STAR.PCR_Plate_1.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.PCR_Plate_1.SetMax(ML_STAR.PCR_Plate_1.GetTotal());
        ML_STAR.PCR_Plate_1.SetCurrentPosition(1);
      }
    }
    MECC::TraceComment(Translate("**** Prep PCR plate 2 ***"));
    pipette_volume = 36;
    {
      loopCounter1 = 0;
      ML_STAR.PCR_Plate_2.SetCurrentPosition(1);
      while (
         (ML_STAR.PCR_Plate_2.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.PCR_Plate_2, 1);
        loopCounter1 = loopCounter1 + 1;
        TipPickupWithErrorHandling(ML_STAR.MlStar50ulTipWithFilter);
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.PCR_Plate_2.GetCurrentPosition() > 0 && ML_STAR.PCR_Plate_2.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.PCR_Plate_2.SetMax(ML_STAR.PCR_Plate_2.GetTotal());
      ML_STAR.PCR_Plate_2.SetCurrentPosition(1);
    }
    CleanUp();
    ISWAP_PLATEANDLIDMOVEMENT::_ExitLibrary();
    NIST_DEVICE_CONTROLLERS::_ExitLibrary();
    NIST_TRUSEQNANO_PREP::_ExitLibrary();
  } }
