<?xml version="1.0" encoding="utf-8"?>
<MethodSet>
  <DeleteAllMethods>false</DeleteAllMethods>
  <Method methodName="PCR_Step_2" creator="David Ross" description="Second stage PCR" dateTime="2019-07-11T12:10:57.6117604-04:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>1</FluidQuantity>
    <PostHeating>false</PostHeating>
    <StartBlockTemperature>25</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>98</PlateauTemperature>
      <PlateauTime>60</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>4</OverShootTemperature>
      <OverShootTime>13.3</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>98</PlateauTemperature>
      <PlateauTime>10</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>2</Slope>
      <PlateauTemperature>72</PlateauTemperature>
      <PlateauTime>30</PlateauTime>
      <OverShootSlope1>2</OverShootSlope1>
      <OverShootTemperature>4.1</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>4</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>98</PlateauTemperature>
      <PlateauTime>10</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>4</OverShootTemperature>
      <OverShootTime>9.3</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>3</GotoNumber>
      <LoopNumber>14</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>5</Number>
      <Slope>2</Slope>
      <PlateauTemperature>72</PlateauTemperature>
      <PlateauTime>30</PlateauTime>
      <OverShootSlope1>2</OverShootSlope1>
      <OverShootTemperature>4.1</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>6</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>72</PlateauTemperature>
      <PlateauTime>120</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>7</Number>
      <Slope>2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>0</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>8</Number>
      <Slope>1.3</Slope>
      <PlateauTemperature>40</PlateauTemperature>
      <PlateauTime>0</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>9</Number>
      <Slope>0.75</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>0</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>10</Number>
      <Slope>0.23</Slope>
      <PlateauTemperature>10</PlateauTemperature>
      <PlateauTime>20</PlateauTime>
      <OverShootSlope1>0.23</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
</MethodSet>