 namespace _Method { #include "Common\\iSWAP-PlateAndLidMovement.hs_" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_Device_Controllers.hs_" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_TruSeqNano_Prep.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
#include "Post-Selection PCR and clean-up.24 samples.res"
variable bln_Global_SimulatorMode;
variable str_Global_ODTCIPAddress;
variable ODTC;
variable odtc_script_path;
variable odtc_script_time;
variable odtc_script_id;
variable var_Global_HHSNode3;
variable HHS3;
variable SetTempHHS3;
variable pipette_volume;
variable loopCounter3;
variable loopCounter5;
variable loopCounter1;
variable loopCounter6;
variable is_debugging;
dialog dialogHandle_1;
dialog dialogHandle_2;
dialog dialogHandle_3;
dialog dialogHandle_4;
dialog dialogHandle_5;
dialog dialogHandle_6;
dialog dialogHandle_7;
dialog dialogHandle_8;
dialog dialogHandle_9;
dialog dialogHandle_10;
dialog dialogHandle_11;
dialog dialogHandle_12;
global device ML_STAR ("Post-Selection PCR and clean-up.24 samples.lay", "ML_STAR", hslTrue);
global device HxFan ("Post-Selection PCR and clean-up.24 samples.lay", "HxFan", hslTrue);
sequence Sample_Plate;
sequence Rev_Primer;
dialog dialogHandle_13;
dialog dialogHandle_14;
variable sample_volume;
variable bead_ratio;
variable bead_volume;
variable pcr_time;
variable pipetting_time;
variable wait_time;
timer timer1;
variable mix_volume;
variable empty_disp;
timer magnet_timer;
timer timer2;
timer timer3;
variable time_point;
dialog dialogHandle_15;
dialog dialogHandle_16;
dialog dialogHandle_17;
dialog dialogHandle_18;
dialog dialogHandle_19;
dialog dialogHandle_20;
dialog dialogHandle_21;
variable elution_vol;
variable bln_Global_SkipAllTimers;
variable timer_2_min;
variable timer_5_min;
variable timer_3_min;
sequence Pooling_to;
variable user_choice;
variable loopCounter4;
dialog customDialog_22;
dialog customDialog_23;
dialog customDialog_24;
dialog customDialog_25;
dialog dialogHandle_26;
dialog dialogHandle_27;
variable sample_mix_volume;
variable timer_10_sec;
variable timer_4_min;
sequence No_pooling_to;
variable pool_samples;
dialog customDialog_28;
dialog dialogHandle_29;
dialog dialogHandle_30;
dialog dialogHandle_31;
dialog dialogHandle_32;
dialog dialogHandle_33;
dialog dialogHandle_34;
dialog dialogHandle_35;
dialog dialogHandle_36;
dialog dialogHandle_37;
dialog dialogHandle_38;
dialog dialogHandle_39;
dialog dialogHandle_40;
dialog dialogHandle_41;
dialog dialogHandle_42;
dialog dialogHandle_43;
dialog dialogHandle_44;
dialog dialogHandle_45;
dialog dialogHandle_46;
dialog dialogHandle_47;
dialog dialogHandle_48;
dialog dialogHandle_49;
dialog dialogHandle_50;
dialog dialogHandle_51;
dialog dialogHandle_52;
dialog dialogHandle_53;
dialog dialogHandle_54;
dialog dialogHandle_55;
dialog dialogHandle_56;
dialog dialogHandle_57;
dialog dialogHandle_58;
dialog dialogHandle_59;
dialog dialogHandle_60;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ISWAP_PLATEANDLIDMOVEMENT::_InitLibrary();
    NIST_DEVICE_CONTROLLERS::_InitLibrary();
    NIST_TRUSEQNANO_PREP::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    bln_Global_SimulatorMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    is_debugging = "false";
    bln_Global_SkipAllTimers = 0;
    if (bln_Global_SimulatorMode == 1)
    {
      if(0){
        bln_Global_SkipAllTimers = 1;
      }
    }
    if (bln_Global_SkipAllTimers == 1)
    {
      timer_2_min = 1;
      timer_3_min = 1;
      timer_4_min = 1;
      timer_5_min = 1;
      timer_10_sec = 1;
    }
    else
    {
      timer_2_min = 120;
      timer_3_min = 180;
      timer_4_min = 240;
      timer_5_min = 300;
      timer_10_sec = 10;
    }
    StartUp();
    MECC::TraceComment(Translate("=======================================================\nRestriction Digest Step\n======================================================="));
    MECC::TraceComment(Translate("***************************************************************************\nPre-heat ODTC for restriction digest\n***************************************************************************"));
    if (bln_Global_SimulatorMode == 0)
    {
      NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
    }
    MECC::TraceComment(Translate("***************************************************************************\nRemove lids from PCR_Plate, Primer_Plate, and Reagent_Plate\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_1.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_1.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Sample_Plate_lid, ML_STAR.Sample_Plate_Lid_Parking, 0, 1, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Reagent_Plate_lid, ML_STAR.Reagent_plate_lid_parking, 0, 1, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_Lid_Parking, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("***************************************************************************\nTransfer DNA template from Sample Plate to PCR plate\n***************************************************************************"));
    dialogHandle_30.SetOutput(Translate("Transfer DNA template from Sample Plate to PCR plate"));
    dialogHandle_30.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    MECC::TraceComment(Translate("***************************************************************************\nAdd Enzyme to PCR plate\n***************************************************************************"));
    dialogHandle_32.SetOutput(Translate("Add Enzyme to PCR plate"));
    dialogHandle_32.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    MECC::TraceComment(Translate("***************************************************************************\nReplace lids on PCR_Plate, Sample_Plate, and Reagent_Plate\n***************************************************************************"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_Lid_Parking, ML_STAR.PCR_Plate_lid, 0, 1, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.Reagent_plate_lid_parking, ML_STAR.Reagent_Plate_lid, 0, 1, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Sample_Plate_Lid_Parking, ML_STAR.Sample_Plate_lid, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("***************************************************************************\nWait for ODTC lid pre-heating method, \nthen open ODTC, move PCR plate to ODTC, close ODTC and run restriction incubation method\n***************************************************************************"));
    if (bln_Global_SimulatorMode == 0)
    {
      NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlateWithLid(ML_STAR.PCR_Plate_move, ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_ODTC_move, ML_STAR.PCR_Plate_ODTC_lid, 0, 0, ML_STAR);
    if (bln_Global_SimulatorMode == 0)
    {
      NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
    }
    MECC::TraceComment(Translate("***************************************************************************\nWhile ODTC is running, move Sample_Plate to far left, and put Pooling_Plate in its place\n***************************************************************************"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveEppendorf350uLElutionPlateWithLid(ML_STAR.Sample_Plate_full, ML_STAR.Sample_Plate_lid, ML_STAR.Elution_Plate_Parking, ML_STAR.Elution_Plate_Parking_lid, 0, 1, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveEppendorf350uLElutionPlateWithLid(ML_STAR.Pooling_Plate_Parking, ML_STAR.Pooling_Plate_Parking_lid, ML_STAR.Pooling_Plate, ML_STAR.Pooling_Plate_lid, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("***************************************************************************\nWait for ODTC incubation to finish, then move PCR plate from ODTC\n***************************************************************************"));
    if (bln_Global_SimulatorMode == 0)
    {
      NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlateWithLid(ML_STAR.PCR_Plate_ODTC_move, ML_STAR.PCR_Plate_ODTC_lid, ML_STAR.PCR_Plate_move, ML_STAR.PCR_Plate_lid, 0, 0, ML_STAR);
    MECC::TraceComment(Translate("=======================================================\nFirst PCR Step\n======================================================="));
    MECC::TraceComment(Translate("***************************************************************************\nClose ODTC, and run PCR pre-heat method on ODTC\n***************************************************************************"));
    if (bln_Global_SimulatorMode == 0)
    {
      NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
    }
    MECC::TraceComment(Translate("***************************************************************************\nRemove lids from PCR_Plate and Primer_Plate\n***************************************************************************"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_Lid_Parking, 0, 1, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.Primer_Plate_lid, ML_STAR.Primer_Plate_Lid_Parking, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("***************************************************************************\nAdd Primers to PCR plate\n***************************************************************************"));
    dialogHandle_34.SetOutput(Translate("Add Primers to PCR plate"));
    dialogHandle_34.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    MECC::TraceComment(Translate("***************************************************************************\nReplace lid on Primer_Plate, Remove lid from Reagent_Plate\n***************************************************************************"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.Primer_Plate_Lid_Parking, ML_STAR.Primer_Plate_lid, 0, 1, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.Reagent_Plate_lid, ML_STAR.Reagent_plate_lid_parking, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("***************************************************************************\nAdd PCR Master Mix to PCR plate\n***************************************************************************"));
    dialogHandle_36.SetOutput(Translate("Add PCR Master Mix to PCR plate"));
    dialogHandle_36.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    MECC::TraceComment(Translate("***************************************************************************\nReplace lid on PCR_Plate and Reagent_Plate\n***************************************************************************"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_Lid_Parking, ML_STAR.PCR_Plate_lid, 0, 1, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.Reagent_plate_lid_parking, ML_STAR.Reagent_Plate_lid, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("***************************************************************************\nWait for ODTC lid pre-heating method, \nthen open ODTC, move PCR plate to ODTC, close ODTC and run step 1 PCR method\n***************************************************************************"));
    if (bln_Global_SimulatorMode == 0)
    {
      NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlateWithLid(ML_STAR.PCR_Plate_move, ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_ODTC_move, ML_STAR.PCR_Plate_ODTC_lid, 0, 0, ML_STAR);
    if (bln_Global_SimulatorMode == 0)
    {
      NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
    }
    if (bln_Global_SkipAllTimers == 0)
    {
      user_choice = 1;
      customDialog_22.InitCustomDialog("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");
      customDialog_22.ShowCustomDialog();
      user_choice = customDialog_22.GetCustomDialogProperty( "ReturnValue" );
      if (user_choice == 2)
      {
        abort;
      }
    }
    MECC::TraceComment(Translate("***************************************************************************\nFirst PCR clean-up;\nAdd beads to Midi plate\nFinish PCR; Remove lid from PCR_Plate;\nbind plasmid DNA to the beads and keep the supernatant\n***************************************************************************"));
    dialogHandle_38.SetOutput(Translate("Add beads to Midi plate (on shaker)"));
    dialogHandle_38.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    MECC::TraceComment(Translate("***************************************************************************\nWait for PCR method to finish, then move PCR plate from ODTC, and take lid off of PCR plate\n***************************************************************************"));
    if (bln_Global_SimulatorMode == 0)
    {
      NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlateWithLid(ML_STAR.PCR_Plate_ODTC_move, ML_STAR.PCR_Plate_ODTC_lid, ML_STAR.PCR_Plate_move, ML_STAR.PCR_Plate_lid, 0, 0, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_Lid_Parking, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("***************************************************************************\nClose ODTC, and run PCR pre-heat method on ODTC\n***************************************************************************"));
    if (bln_Global_SimulatorMode == 0)
    {
      NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
    }
    MECC::TraceComment(Translate("=================================================\nShake Midi plate for ten seconds to resuspend beads;\nTransfer samples from PCR plate to Midi plate; \nMix by pipetting 10x;\nand incubate two additional minutes without shaking\n================================================="));
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
      HSLHamHeaterShaker::StartShaker(HHS3, 1800);
    }
    MECC::TraceComment(Translate("***** Now shaking at RT for 10s ......."));
    if( 0 == timer3.SetTimer(timer_10_sec) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 10 sec shaking timer ****"));
    if( 0 == timer3.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::StopShaker(HHS3);
    }
    dialogHandle_40.SetOutput(Translate("Transfer samples from PCR plate to Midi plate; "));
    dialogHandle_40.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    MECC::TraceComment(Translate("***** Now incubating at RT for 5 min ......."));
    if( 0 == timer2.SetTimer(timer_5_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 5 minute timer for RT incubation ****"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_Lid_Parking, ML_STAR.PCR_Plate_lid, 1, 1, ML_STAR);
    if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    MECC::TraceComment(Translate("***** Incubation finished..."));
    MECC::TraceComment(Translate("=======================================================\nMove Midi plate to magnet, incubate 5 minutes,\nthen transfer supernatant to columns 4-6 in Midi plate;\nincubate 5 more minutes; then transfer supernatant to columns 7-9 in Midi plate\nmove Midi plate to HHS\n======================================================="));
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("**** on magnet..."));
    if( 0 == magnet_timer.SetTimer(timer_2_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 2 minute timer for magnet ****"));
    if( 0 == magnet_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** done."));
    dialogHandle_42.SetOutput(Translate("transfer supernatant to columns 4-6 in Midi plate;"));
    dialogHandle_42.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    MECC::TraceComment(Translate("**** 3 minute timer for magnet ****"));
    if( 0 == magnet_timer.SetTimer(timer_3_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == magnet_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** Second supernatant transfer to make sure all beads are stuck to magnet"));
    dialogHandle_44.SetOutput(Translate("transfer supernatant to columns 7-9 in Midi plate"));
    dialogHandle_44.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    MECC::TraceComment(Translate("**** Move plate to HHS"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_magnet, ML_STAR.Midi_on_HHS, 1, 1, ML_STAR);
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
    }
    MECC::TraceComment(Translate("=====================================================================\nNext step: bind PCR product to beads and discard the supernatant\n====================================================================="));
    dialogHandle_46.SetOutput(Translate("Add beads to Midi plate (on shaker)"));
    dialogHandle_46.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    MECC::TraceComment(Translate("***** Now incubating at RT for 5min ......."));
    if( 0 == timer2.SetTimer(timer_5_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 5 minute timer for RT incubation ****"));
    if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("***** Incubation finished..."));
    MECC::TraceComment(Translate("=======================================================\nMove Midi plate to magnet, incubate 5 minutes,\nthen discard the supernatant\n======================================================="));
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("**** on magnet..."));
    if( 0 == magnet_timer.SetTimer(timer_5_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 5 minute timer for magnet ****"));
    if( 0 == magnet_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** done."));
    dialogHandle_48.SetOutput(Translate("discard the supernatant"));
    dialogHandle_48.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    MECC::TraceComment(Translate("===============================================================================\nEthanol rinse (1x), then resuspend sample in elution buffer, put plate on magnet, and wait 5 minutes\n==============================================================================="));
    EthanolStep(ML_STAR.Midi_on_magnet_3, ML_STAR.Ethanol_85, 35, ML_STAR.DI_Water, ML_STAR.Midi_on_HHS_3);
    MECC::TraceComment(Translate("==================================================================================================================================\nMove to Magnet\n=================================================================================================================================="));
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 1, 1, ML_STAR);
    if( 0 == magnet_timer.SetTimer(timer_5_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (bln_Global_SkipAllTimers == 0)
    {
      user_choice = 1;
      customDialog_23.InitCustomDialog("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");
      customDialog_23.ShowCustomDialog();
      user_choice = customDialog_23.GetCustomDialogProperty( "ReturnValue" );
      if (user_choice == 2)
      {
        abort;
      }
    }
    MECC::TraceComment(Translate("***************************************************************************\nRemove lid from PCR_Plate and Reagent_Plate; and prep plate for Second PCR\n***************************************************************************"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.Reagent_Plate_lid, ML_STAR.Reagent_plate_lid_parking, 0, 1, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_Lid_Parking, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("**** Prep PCR plate 2 ***"));
    if (is_debugging == "true")
    {
      dialogHandle_17.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_17.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    dialogHandle_50.SetOutput(Translate("master mix 2 to PCR plate"));
    dialogHandle_50.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    MECC::TraceComment(Translate("***************************************************************************\nReplace lid on Reagent_Plate\n***************************************************************************"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.Reagent_plate_lid_parking, ML_STAR.Reagent_Plate_lid, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================================\nWait for 5 minute magnet timer to finish, then pipette supernatant from Midi plate to new PCR plate\n=============================================================================="));
    MECC::TraceComment(Translate("**** 5 minute timer for magnet ****"));
    if( 0 == magnet_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    dialogHandle_52.SetOutput(Translate("supernatant from midi plate to PCR plate"));
    dialogHandle_52.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    MECC::TraceComment(Translate("***************************************************************************\nReplace lid on PCR_Plate;\nmove Midi plate to HHS\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_26.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_26.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_Lid_Parking, ML_STAR.PCR_Plate_lid, 0, 1, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_magnet, ML_STAR.Midi_on_HHS, 1, 1, ML_STAR);
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
    }
    MECC::TraceComment(Translate("***************************************************************************\nWait for ODTC lid pre-heating method, \nthen open ODTC, move PCR plate to ODTC, close ODTC and run step 2 PCR method\n***************************************************************************"));
    if (bln_Global_SimulatorMode == 0)
    {
      NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlateWithLid(ML_STAR.PCR_Plate_move, ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_ODTC_move, ML_STAR.PCR_Plate_ODTC_lid, 0, 0, ML_STAR);
    if (bln_Global_SimulatorMode == 0)
    {
      NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
    }
    pcr_time = 1504;
    pipetting_time = 300;
    wait_time = pcr_time - pipetting_time;
    if (bln_Global_SkipAllTimers == 1)
    {
      wait_time = 1;
    }
    if( 0 == timer1.SetTimer(wait_time) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (bln_Global_SkipAllTimers == 0)
    {
      customDialog_24.InitCustomDialog("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");
      customDialog_24.ShowCustomDialog();
      user_choice = customDialog_24.GetCustomDialogProperty( "ReturnValue" );
      if (user_choice == 2)
      {
        abort;
      }
    }
    MECC::TraceComment(Translate("***************************************************************************\nSecond PCR clean-up;\nMove Midi to HHS;\nAdd beads to Midi plate\nFinish PCR; Remove lid from PCR_Plate;\nbind PCR product to the beads and discard the supernatant\n***************************************************************************"));
    MECC::TraceComment(Translate("**** timer waiting for second PCR ****"));
    if( 0 == timer1.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    dialogHandle_54.SetOutput(Translate("Add beads to Midi plate (on shaker)"));
    dialogHandle_54.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    MECC::TraceComment(Translate("***************************************************************************\nWait for PCR method to finish, then move PCR plate from ODTC, and take lid off of PCR plate\n***************************************************************************"));
    if (bln_Global_SimulatorMode == 0)
    {
      NIST_DEVICE_CONTROLLERS::WaitForScriptODTC(ODTC, odtc_script_time, odtc_script_id);
      NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlateWithLid(ML_STAR.PCR_Plate_ODTC_move, ML_STAR.PCR_Plate_ODTC_lid, ML_STAR.PCR_Plate_move, ML_STAR.PCR_Plate_lid, 0, 0, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_Lid_Parking, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("***************************************************************************\nClose ODTC\n***************************************************************************"));
    if (bln_Global_SimulatorMode == 0)
    {
      NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
    }
    MECC::TraceComment(Translate("=================================================\nShake midi plate for 10 seconds to resuspend beads;\nTransfer samples from PCR plate to Midi plate;\nMix by pipetting 10x;\nand incubate 5 additional minutes without shaking\n================================================="));
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
      HSLHamHeaterShaker::StartShaker(HHS3, 1800);
    }
    MECC::TraceComment(Translate("***** Now shaking at RT for 10s ......."));
    if( 0 == timer3.SetTimer(timer_10_sec) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 10 sec shaking timer ****"));
    if( 0 == timer3.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::StopShaker(HHS3);
    }
    dialogHandle_56.SetOutput(Translate("Transfer samples from PCR plate to Midi plate;"));
    dialogHandle_56.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    MECC::TraceComment(Translate("***** Now incubating at RT for 2min ......."));
    if( 0 == timer2.SetTimer(timer_5_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 5 minute timer for RT incubation ****"));
    if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("***** Incubation finished..."));
    MECC::TraceComment(Translate("=======================================================\nMove Midi plate to magnet, incubate 4 minutes,\nthen discard supernatant;\n======================================================="));
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("**** on magnet..."));
    if( 0 == magnet_timer.SetTimer(timer_4_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 4 minute timer for magnet ****"));
    if( 0 == magnet_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** done."));
    dialogHandle_58.SetOutput(Translate("discard supernatant;"));
    dialogHandle_58.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    MECC::TraceComment(Translate("===============================================================================\nEthanol rinse (2x), then resuspend sample in elution buffer, put plate on magnet, and wait 5 minutes\n==============================================================================="));
    elution_vol = 50;
    EthanolStep(ML_STAR.Midi_on_magnet_4, ML_STAR.Ethanol_70, elution_vol, ML_STAR.Elution_Buffer, ML_STAR.Midi_on_HHS_4);
    MECC::TraceComment(Translate("***************************************************************************\nRemove lid from Pooling_Plate\n***************************************************************************"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Pooling_Plate_lid, ML_STAR.Pooling_Plate_Lid_Parking, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("==================================================================================================================================\nMove to Magnet\n=================================================================================================================================="));
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 1, 1, ML_STAR);
    if( 0 == magnet_timer.SetTimer(timer_5_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (bln_Global_SkipAllTimers == 0)
    {
      user_choice = 1;
      customDialog_25.InitCustomDialog("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");
      customDialog_25.ShowCustomDialog();
      user_choice = customDialog_25.GetCustomDialogProperty( "ReturnValue" );
      if (user_choice == 2)
      {
        abort;
      }
    }
    pool_samples = 0;
    if(0){
      customDialog_28.InitCustomDialog("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");
      customDialog_28.SetCustomDialogProperty( "radioButton1.IsChecked", pool_samples );
      customDialog_28.ShowCustomDialog();
      pool_samples = customDialog_28.GetCustomDialogProperty( "radioButton1.IsChecked" );
    }
    MECC::TraceComment(Translate("==============================================================================\nWait for 5 minute magnet timer to finish, then pipette supernatant from Midi plate to new Pooling plate\n=============================================================================="));
    MECC::TraceComment(Translate("**** 5 minute timer for magnet ****"));
    if( 0 == magnet_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("***************************************************************************\nPipette Cleaned up PCR samples into 8 or 24 wells of Pooling_Plate\n***************************************************************************"));
    dialogHandle_60.SetOutput(Translate("Pipette Cleaned up PCR samples into 8 or 24 wells of Pooling_Plate"));
    dialogHandle_60.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    MECC::TraceComment(Translate("**** Move Mid plate to waste"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_magnet, ML_STAR.MIDI_Waste, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("***************************************************************************\nReplace lid on Pooling_Plate\n***************************************************************************"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Pooling_Plate_Lid_Parking, ML_STAR.Pooling_Plate_lid, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("*** PCR plate to waste"));
    ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlate(ML_STAR.PCR_Plate_move, ML_STAR.PCR_Plate_waste, 1, 1, ML_STAR);
    CleanUp();
    ISWAP_PLATEANDLIDMOVEMENT::_ExitLibrary();
    NIST_DEVICE_CONTROLLERS::_ExitLibrary();
    NIST_TRUSEQNANO_PREP::_ExitLibrary();
  } }
