private function CleanUp(  ) void ;
private function DebuggingPause(  ) void ;
private function EthanolStep( sequence & seq_PlateOnMagnet, sequence & seq_EthanolSource, variable var_ResuspensionVolume, sequence & var_ResuspensionBuffer, sequence & seq_PlateOnHSS ) void ;
private function Get_Tip_Use_Str( sequence & in_seq ) variable ;
private function Initialize_HHS( variable & var_Local_DeviceID, variable var_Local_Node ) void ;
function SetHHSTemperature( variable var_HHS_ID, variable var_Temperature ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function Initialize_HHS( variable & var_Local_DeviceID, variable var_Local_Node ) void {
  private dialog customDialog_1;
  private variable bln_Local_HHSInitReturn;
  private variable int_Global_ReturnDialog;
  private variable loopCounter20;
  var_Local_DeviceID = 0;
  MECC::TraceComment(Translate("==================================================================================================================================\nInitialize_HHS Start\n=================================================================================================================================="));
  Trace ("==================================================================================================================================");
  Trace ("Initializing HHS Located at Node:  ", var_Local_Node);
  Trace ("==================================================================================================================================");
  {
    loopCounter20 = 0;
    while (1 == 1)
    {
      loopCounter20 = loopCounter20 + 1;
      HSLHamHeaterShaker::SetSimulation(bln_Global_SimulatorMode);
      bln_Local_HHSInitReturn = HSLHamHeaterShaker::CreateUsbDevice(var_Local_Node, var_Local_DeviceID);
      if (bln_Local_HHSInitReturn != 0)
      {
        MECC::TraceComment(Translate("==================================================================================================================================\nFailed to Initialize HHS\n=================================================================================================================================="));
        HSLHamHeaterShaker::Terminate();
        customDialog_1.InitCustomDialog("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");
        customDialog_1.ShowCustomDialog();
        int_Global_ReturnDialog = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
        if (int_Global_ReturnDialog == 2)
        {
          MECC::TraceComment(Translate("==================================================================================================================================\nMethod Aborted\n=================================================================================================================================="));
          abort;
        }
      }
      else
      {
        break;
      }
    }
  }
  MECC::TraceComment(Translate("==================================================================================================================================\nInitialize_HHS Finish\n=================================================================================================================================="));
}

private function CleanUp(  ) void {
  MECC::TraceComment(Translate("***************************************************************************\nCleanUp() submethod\n***************************************************************************"));
  if (bln_Global_SimulatorMode == 0)
  {
    HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    NIST_DEVICE_CONTROLLERS::TerminateHHSs();
    NIST_DEVICE_CONTROLLERS::TerminateODTC(ODTC);
    NIST_DEVICE_CONTROLLERS::TerminateCPAC();
    {
      	HxFan.SetFanSpeed("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"); // SetFanSpeed
    }
  }
  ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
  TipCount::Write2(ML_STAR.MlStar50ulTipWithFilter, "tip_counter_50", ML_STAR);
  TipCount::Write2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, "tip_counter_300", ML_STAR);
  TipCount::Write2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, "tip_counter_1000", ML_STAR);
}

private function StartUp(  ) void {
  private variable SetTempCPAC;
  private dialog customDialog_2;
  private variable thermocycle_str;
  private dialog customDialog_3;
  private dialog customDialog_4;
  private dialog customDialog_5;
  private dialog customDialog_6;
  private dialog customDialog_7;
  private dialog customDialog_8;
  MECC::TraceComment(Translate("***************************************************************************\nStartUp() submethod\n***************************************************************************"));
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  TipCount::Edit2(ML_STAR.MlStar50ulTipWithFilter, "tip_counter_50", ML_STAR, 300);
  TipCount::Edit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, "tip_counter_300", ML_STAR, 300);
  TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, "tip_counter_1000", ML_STAR, 300);
  if (bln_Global_SimulatorMode == 0)
  {
    if (is_pipetting == "true")
    {
      SetTempCPAC = 6;
    }
    else
    {
      SetTempCPAC = 37;
    }
    NIST_DEVICE_CONTROLLERS::InitCPAC();
    NIST_DEVICE_CONTROLLERS::SetCPACTemperature(1, SetTempCPAC);
  }
  use_ODTC = 1;
  use_manual_thermocycler = use_ODTC - 1;
  customDialog_2.InitCustomDialog("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");
  customDialog_2.SetCustomDialogProperty( "radioButton2.IsChecked", use_ODTC );
  customDialog_2.SetCustomDialogProperty( "radioButton3.IsChecked", use_manual_thermocycler );
  customDialog_2.ShowCustomDialog();
  use_ODTC = customDialog_2.GetCustomDialogProperty( "radioButton2.IsChecked" );
  use_manual_thermocycler = customDialog_2.GetCustomDialogProperty( "radioButton3.IsChecked" );
  if (use_manual_thermocycler == 1)
  {
    is_running_ODTC = Translate("false");
    thermocycle_str = Translate("Use manual termocycler");
  }
  else
  {
    thermocycle_str = Translate("Use automated ODTC");
  }
  lacI_ratio_1_1 = 0.6;
  lacI_ratio_1_2 = 0.6;
  lacI_ratio_2 = 1.0;
  ratio_1_1_str = StrFStrEx(lacI_ratio_1_1, 0, 2);
  ratio_1_2_str = StrFStrEx(lacI_ratio_1_2, 0, 2);
  ratio_2_str = StrFStrEx(lacI_ratio_2, 0, 3);
  lacI_str = StrConcat8(Translate("LacI: "), ratio_1_1_str, Translate(", "), ratio_1_2_str, Translate(", "), ratio_2_str, Translate(""), Translate(""));
  user_choice = 1;
  if (use_ODTC == 1)
  {
    customDialog_5.InitCustomDialog("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");
    customDialog_5.ShowCustomDialog();
    user_choice = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
  }
  else
  {
    customDialog_6.InitCustomDialog("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");
    customDialog_6.ShowCustomDialog();
    user_choice = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
  }
  if (user_choice == 2)
  {
    abort;
  }
  user_choice = 1;
  if (use_ODTC == 1)
  {
    customDialog_8.InitCustomDialog("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");
    customDialog_8.ShowCustomDialog();
    user_choice = customDialog_8.GetCustomDialogProperty( "ReturnValue" );
  }
  else
  {
  }
  if (user_choice == 2)
  {
    abort;
  }
  user_choice = 1;
  customDialog_4.InitCustomDialog("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");
  customDialog_4.ShowCustomDialog();
  user_choice = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
  if (user_choice == 2)
  {
    abort;
  }
  user_choice = 1;
  customDialog_7.InitCustomDialog("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");
  customDialog_7.ShowCustomDialog();
  user_choice = customDialog_7.GetCustomDialogProperty( "ReturnValue" );
  if (user_choice == 2)
  {
    abort;
  }
  if (bln_Global_SimulatorMode == 0)
  {
    {
      	HxFan.SetComPort("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"); // SetComPort
    }
    {
      	HxFan.SetFanSpeed("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"); // SetFanSpeed
    }
    {
      	HxFan.SetContinuousMode("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"); // SetContinuousMode
    }
  }
  if (bln_Global_SimulatorMode == 0)
  {
    if(0){
      str_Global_ODTCIPAddress = Translate("192.168.88.253");
    }
    str_Global_ODTCIPAddress = Translate("169.254.207.19");
    var_Global_HHSNode3 = 3;
    SetTempHHS3 = 20;
    Initialize_HHS(HHS3, var_Global_HHSNode3);
    NIST_TRUSEQNANO_PREP::SetHHSTemperature(HHS3, SetTempHHS3);
    HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
    NIST_DEVICE_CONTROLLERS::InitODTC(str_Global_ODTCIPAddress, ODTC);
    if (use_ODTC == 1)
    {
      NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
      customDialog_3.InitCustomDialog("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");
      customDialog_3.ShowCustomDialog();
      user_choice = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
      if (user_choice == 2)
      {
        abort;
      }
    }
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
}

private function EthanolStep( sequence & seq_PlateOnMagnet, sequence & seq_EthanolSource, variable var_ResuspensionVolume, sequence & var_ResuspensionBuffer, sequence & seq_PlateOnHSS ) void {
  private timer EvaporationTime;
  private timer Incubate_RT_5sec;
  MECC::TraceComment(Translate("=====================================================================\nEthanol Step\n====================================================================="));
  {
    for(loopCounter5 = 0; loopCounter5 < 1;)
    {
      loopCounter5 = loopCounter5 + 1;
      ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Water_EB_ethanol_lid, ML_STAR.Water_EB_ethanol_lid_parking, 1, 0, ML_STAR);
      ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Water_EB_ethanol_lid_parking, ML_STAR.Water_EB_ethanol_lid, 1, 0, ML_STAR);
      if (is_pipetting == "true")
      {
        MECC::TraceComment(Translate("==========================================================================\nTransfer Alcohol Supernatant to Waste\n=========================================================================="));
      }
    }
  }
  MECC::TraceComment(Translate("==============================================================\nRemove Residual Ethanol\n=============================================================="));
  if (is_pipetting == "true")
  {
  }
  MECC::TraceComment(Translate("==================================================================================================================================\nMove to Shaker\n=================================================================================================================================="));
  ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_magnet, ML_STAR.Midi_on_HHS, 0, 1, ML_STAR);
  if (bln_Global_SimulatorMode == 0)
  {
    HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
  }
  if( 0 == EvaporationTime.SetTimer(timer_30_sec) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("**** 30 extra seconds on HHS (off magnet) for ethanol evaporation ****"));
  if( 0 == EvaporationTime.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Water_EB_ethanol_lid, ML_STAR.Water_EB_ethanol_lid_parking, 1, 0, ML_STAR);
  MECC::TraceComment(Translate("===============================================================================================\nPipetting Resuspension Buffer\n==============================================================================================="));
  if (is_pipetting == "true")
  {
  }
  if( 0 == Incubate_RT_5sec.SetTimer(timer_10_sec) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if (bln_Global_SimulatorMode == 0)
  {
    HSLHamHeaterShaker::StartShaker(HHS3, 1800);
  }
  MECC::TraceComment(Translate("**** 10 s shaking timer (1800 rpm) ****"));
  if( 0 == Incubate_RT_5sec.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if (bln_Global_SimulatorMode == 0)
  {
    HSLHamHeaterShaker::StopShaker(HHS3);
  }
  if( 0 == Incubate_RT_5sec.SetTimer(timer_2_min) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Water_EB_ethanol_lid_parking, ML_STAR.Water_EB_ethanol_lid, 1, 0, ML_STAR);
  if (bln_Global_SimulatorMode == 0)
  {
    HSLHamHeaterShaker::StartShaker(HHS3, 400);
  }
  MECC::TraceComment(Translate("**** 2 min shaking timer (400 rpm) ****"));
  if( 0 == Incubate_RT_5sec.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if (bln_Global_SimulatorMode == 0)
  {
    HSLHamHeaterShaker::StopShaker(HHS3);
  }
  MECC::TraceComment(Translate("==================================================================================================================================\nEthanolStep Finish\n=================================================================================================================================="));
}

function SetHHSTemperature( variable var_HHS_ID, variable var_Temperature ) void {
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  SetHHSTemperature <<<<<<<<<<"));
  HSLHamHeaterShaker::StopTempCtrl(var_HHS_ID);
  if (var_Temperature != 0)
  {
    Trace ("***** HHS number ", var_HHS_ID, " is being set to ", var_Temperature, "C");
    HSLHamHeaterShaker::StartTempCtrl(var_HHS_ID, var_Temperature, 0);
  }
  else
  {
    Trace ("***** HHS number ", var_HHS_ID, " is not being controlled, as it is desired to be at room temperature.");
  }
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  SetHHSTemperature <<<<<<<<<<"));
}

private function Get_Tip_Use_Str( sequence & in_seq ) variable {
  private variable num_of_tips_needed;
  private variable tip_str;
  num_of_tips_needed = SeqGetTotal(in_seq);
  tip_str = "11111111";
  if (num_of_tips_needed == 2)
  {
    tip_str = "11000000";
  }
  if (num_of_tips_needed == 4)
  {
    tip_str = "11110000";
  }
  if (num_of_tips_needed == 6)
  {
    tip_str = "00111111";
  }
  return (tip_str);
}

private function DebuggingPause(  ) void {
  private dialog dialogHandle_9;
  dialogHandle_9.SetOutput(Translate("Click 'OK' to continue."));
  dialogHandle_9.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
}
