 namespace _Method { #include "Common\\iSWAP-PlateAndLidMovement.hs_" }
 namespace _Method { #include "NIST\\Libraries\\NIST_TruSeqNano_Processes.hs_" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_Device_Controllers.hs_" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_TruSeqNano_Prep.hs_" }
#include "Post-Selection PCR Prep.res"
variable bln_Global_SimulatorMode;
variable str_Global_ODTCIPAddress;
variable ODTC;
variable odtc_script_path;
variable odtc_script_time;
variable odtc_script_id;
global device ML_STAR ("Post-Selection PCR Prep.lay", "ML_STAR", hslTrue);
variable var_Global_HHSNode3;
variable HHS3;
variable SetTempHHS3;
variable pipette_volume;
variable mix_volume;
variable loopCounter3;
variable primer_mix_volume;
variable loopCounter4;
variable loopCounter5;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ISWAP_PLATEANDLIDMOVEMENT::_InitLibrary();
    NIST_TRUSEQNANO_PROCESSES::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    NIST_DEVICE_CONTROLLERS::_InitLibrary();
    NIST_TRUSEQNANO_PREP::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    StartUp();
    MECC::TraceComment(Translate("***************************************************************************\nPre-heat ODTC for restriction digest\n***************************************************************************"));
    NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
    odtc_script_path = "C:\\Program Files (x86)\\HAMILTON\\Methods\\GSF-IMS Project\\E. coli Methods\\Post-Selection PCR Prep\\Restriction_Initialization.xml";
    NIST_DEVICE_CONTROLLERS::StartScriptODTC(ODTC, odtc_script_path, odtc_script_time, odtc_script_id);
    MECC::TraceComment(Translate("***************************************************************************\nRemove lids from PCR_Plate and Elution_Plate\n***************************************************************************"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Elution_Plate_lid, ML_STAR.Elution_Plate_Lid_Parking, 0, 1, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_Lid_Parking, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("***************************************************************************\nTransfer DNA template from Elution Plate to PCR plate\n***************************************************************************"));
    pipette_volume = 40;
    mix_volume = 30;
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.Elution_Plate.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Elution_Plate, 1, ML_STAR.PCR_Plate, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.Elution_Plate.GetCurrentPosition() > 0 && ML_STAR.Elution_Plate.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Elution_Plate.SetMax(ML_STAR.Elution_Plate.GetTotal());
      ML_STAR.PCR_Plate.SetMax(ML_STAR.PCR_Plate.GetTotal());
      ML_STAR.Elution_Plate.SetCurrentPosition(1);
      ML_STAR.PCR_Plate.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("***************************************************************************\nAdd Enzyme to PCR plate\n***************************************************************************"));
    pipette_volume = 5;
    mix_volume = 30;
    {
      sequence arrseqAspirate_1[];
      sequence arrseqDispense_1[];
      arrseqAspirate_1.SetSize(1);
      arrseqAspirate_1.SetAt(0, ML_STAR.Restr_Enzyme);
      arrseqDispense_1.SetSize(1);
      arrseqDispense_1.SetAt(0, ML_STAR.PCR_Plate);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 3);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 0);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "Tip_50ulFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "Tip_50ulFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      PTL::SetPipettingState("DispensePrerinsingMixCycles", 3);
      PTL::SetPipettingState("DispensePrerinsingMixPosition", 1);
      PTL::SetPipettingState("DispensePrerinsingMixVolume", mix_volume);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, arrseqAspirate_1, arrseqDispense_1, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Restr_Enzyme, ML_STAR.PCR_Plate) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    MECC::TraceComment(Translate("***************************************************************************\nReplace lids on PCR_Plate and Elution_Plate\n***************************************************************************"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_Lid_Parking, ML_STAR.PCR_Plate_lid, 0, 1, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Elution_Plate_Lid_Parking, ML_STAR.Elution_Plate_lid, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("***************************************************************************\nWait for ODTC lid pre-heating method, \nthen open ODTC, move PCR plate to ODTC, close ODTC and run restriction incubation method\n***************************************************************************"));
    NIST_DEVICE_CONTROLLERS::WaitForScriptODTC(ODTC, odtc_script_time, odtc_script_id);
    NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
    ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlateWithLid(ML_STAR.PCR_Plate_move, ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_ODTC_move, ML_STAR.PCR_Plate_ODTC_lid, 0, 0, ML_STAR);
    NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
    odtc_script_path = "C:\\Program Files (x86)\\HAMILTON\\Methods\\GSF-IMS Project\\E. coli Methods\\Post-Selection PCR Prep\\Restriction_Incubation.xml";
    NIST_DEVICE_CONTROLLERS::StartScriptODTC(ODTC, odtc_script_path, odtc_script_time, odtc_script_id);
    if (primer_mix_volume > 0)
    {
      MECC::TraceComment(Translate("***************************************************************************\nDuring restriction incubation, take lid off of Primer plate and mix primers\n***************************************************************************"));
      ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.Primer_Plate_lid, ML_STAR.Primer_Plate_Lid_Parking, 1, 1, ML_STAR);
      {
        sequence arrseqAspirate_2[];
        sequence arrseqDispense_2[];
        arrseqAspirate_2.SetSize(1);
        arrseqAspirate_2.SetAt(0, ML_STAR.Primer_mix_from_1);
        arrseqDispense_2.SetSize(1);
        arrseqDispense_2.SetAt(0, ML_STAR.Primer_mix_to_1);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 3);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 0);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseSubmergeDepth", 0);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
        PTL::SetPipettingState("DispenseFluidHeight", 0);
        PTL::SetPipettingState("DispenseMode", 3);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslTrue);
        PTL::SetPipettingState("DispenseSequenceReducible", hslTrue);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        PTL::SetPipettingState("DispensePrerinsingMixCycles", 3);
        PTL::SetPipettingState("DispensePrerinsingMixPosition", 1);
        PTL::SetPipettingState("DispensePrerinsingMixVolume", primer_mix_volume);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, arrseqAspirate_2, arrseqDispense_2, 1, 1, primer_mix_volume, 0, 1, hslInfinite, hslInfinite, 1, "", ML_STAR.Primer_mix_from_1, ML_STAR.Primer_mix_to_1) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
      {
        sequence arrseqAspirate_3[];
        sequence arrseqDispense_3[];
        arrseqAspirate_3.SetSize(1);
        arrseqAspirate_3.SetAt(0, ML_STAR.Primer_mix_from_2);
        arrseqDispense_3.SetSize(1);
        arrseqDispense_3.SetAt(0, ML_STAR.Primer_mix_to_2);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 3);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 0);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "11000000");
        PTL::SetPipettingState("InitializeEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupChannelVariable", "11000000");
        PTL::SetPipettingState("TipPickupEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "11000000");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "11000000");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseSubmergeDepth", 0);
        PTL::SetPipettingState("DispenseChannelVariable", "11000000");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
        PTL::SetPipettingState("DispenseFluidHeight", 0);
        PTL::SetPipettingState("DispenseMode", 3);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslTrue);
        PTL::SetPipettingState("DispenseSequenceReducible", hslTrue);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        PTL::SetPipettingState("DispensePrerinsingMixCycles", 3);
        PTL::SetPipettingState("DispensePrerinsingMixPosition", 1);
        PTL::SetPipettingState("DispensePrerinsingMixVolume", primer_mix_volume);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, arrseqAspirate_3, arrseqDispense_3, 1, 1, primer_mix_volume, 0, 1, hslInfinite, hslInfinite, 1, "", ML_STAR.Primer_mix_from_2, ML_STAR.Primer_mix_to_2) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
      ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.Primer_Plate_Lid_Parking, ML_STAR.Primer_Plate_lid, 0, 1, ML_STAR);
    }
    MECC::TraceComment(Translate("***************************************************************************\nWait for ODTC incubation to finish, then move PCR plate from ODTC\n***************************************************************************"));
    NIST_DEVICE_CONTROLLERS::WaitForScriptODTC(ODTC, odtc_script_time, odtc_script_id);
    NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
    ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlateWithLid(ML_STAR.PCR_Plate_ODTC_move, ML_STAR.PCR_Plate_ODTC_lid, ML_STAR.PCR_Plate_move, ML_STAR.PCR_Plate_lid, 0, 0, ML_STAR);
    MECC::TraceComment(Translate("***************************************************************************\nClose ODTC, and run PCR pre-heat method on ODTC\n***************************************************************************"));
    NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
    odtc_script_path = "C:\\Program Files (x86)\\HAMILTON\\Methods\\GSF-IMS Project\\E. coli Methods\\Post-Selection PCR Prep\\PCR_Initialization.xml";
    NIST_DEVICE_CONTROLLERS::StartScriptODTC(ODTC, odtc_script_path, odtc_script_time, odtc_script_id);
    MECC::TraceComment(Translate("***************************************************************************\nRemove lids from PCR_Plate and Primer_Plate\n***************************************************************************"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_Lid_Parking, 0, 1, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.Primer_Plate_Lid_Parking, ML_STAR.Primer_Plate_lid, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("***************************************************************************\nAdd Primers to PCR plate\n***************************************************************************"));
    pipette_volume = 2.5;
    {
      sequence arrseqAspirate_4[];
      sequence arrseqDispense_4[];
      arrseqAspirate_4.SetSize(1);
      arrseqAspirate_4.SetAt(0, ML_STAR.Primer_1);
      arrseqDispense_4.SetSize(1);
      arrseqDispense_4.SetAt(0, ML_STAR.PCR_Plate);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 3);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 0);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "Tip_50ulFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "Tip_50ulFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, arrseqAspirate_4, arrseqDispense_4, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Primer_1, ML_STAR.PCR_Plate) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    {
      sequence arrseqAspirate_5[];
      sequence arrseqDispense_5[];
      arrseqAspirate_5.SetSize(1);
      arrseqAspirate_5.SetAt(0, ML_STAR.Primer_2);
      arrseqDispense_5.SetSize(1);
      arrseqDispense_5.SetAt(0, ML_STAR.PCR_Plate);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 3);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 0);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "Tip_50ulFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "Tip_50ulFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, arrseqAspirate_5, arrseqDispense_5, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Primer_2, ML_STAR.PCR_Plate) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    MECC::TraceComment(Translate("***************************************************************************\nAdd PCR Master Mix to PCR plate\n***************************************************************************"));
    pipette_volume = 50;
    mix_volume = 50;
    {
      sequence arrseqAspirate_6[];
      sequence arrseqDispense_6[];
      arrseqAspirate_6.SetSize(1);
      arrseqAspirate_6.SetAt(0, ML_STAR.Master_Mix);
      arrseqDispense_6.SetSize(1);
      arrseqDispense_6.SetAt(0, ML_STAR.PCR_Plate);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 3);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 0);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "Tip_50ulFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "Tip_50ulFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      PTL::SetPipettingState("DispensePrerinsingMixCycles", 3);
      PTL::SetPipettingState("DispensePrerinsingMixPosition", 2);
      PTL::SetPipettingState("DispensePrerinsingMixVolume", mix_volume);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, arrseqAspirate_6, arrseqDispense_6, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Master_Mix, ML_STAR.PCR_Plate) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    MECC::TraceComment(Translate("***************************************************************************\nReplace lids on Primer_Plate and PCR_Plate\n***************************************************************************"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.Primer_Plate_Lid_Parking, ML_STAR.Primer_Plate_lid, 0, 1, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_Lid_Parking, ML_STAR.PCR_Plate_lid, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("***************************************************************************\nWait for ODTC lid pre-heating method, \nthen open ODTC, move PCR plate to ODTC, close ODTC and run step 1 PCR method\n***************************************************************************"));
    NIST_DEVICE_CONTROLLERS::WaitForScriptODTC(ODTC, odtc_script_time, odtc_script_id);
    NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
    ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlateWithLid(ML_STAR.PCR_Plate_move, ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_ODTC_move, ML_STAR.PCR_Plate_ODTC_lid, 0, 0, ML_STAR);
    NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
    odtc_script_path = "C:\\Program Files (x86)\\HAMILTON\\Methods\\GSF-IMS Project\\E. coli Methods\\Post-Selection PCR Prep\\PCR_Step_1.xml";
    NIST_DEVICE_CONTROLLERS::StartScriptODTC(ODTC, odtc_script_path, odtc_script_time, odtc_script_id);
    MECC::TraceComment(Translate("***************************************************************************\nWait for PCR method to finish, then move PCR plate from ODTC\n***************************************************************************"));
    NIST_DEVICE_CONTROLLERS::WaitForScriptODTC(ODTC, odtc_script_time, odtc_script_id);
    NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
    ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlateWithLid(ML_STAR.PCR_Plate_ODTC_move, ML_STAR.PCR_Plate_ODTC_lid, ML_STAR.PCR_Plate_move, ML_STAR.PCR_Plate_lid, 1, 0, ML_STAR);
    MECC::TraceComment(Translate("***************************************************************************\nRemove lids from PCR_Plate and Pooling_Plate\n***************************************************************************"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_Lid_Parking, 0, 1, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Pooling_Plate_lid, ML_STAR.Pooling_Plate_Lid_Parking, 1, 1, ML_STAR);
    pipette_volume = 105;
    {
      loopCounter5 = 0;
      while (
         (ML_STAR.Pooling_from.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Pooling_from, 1, ML_STAR.Pooling_to, 1);
        loopCounter5 = loopCounter5 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        {
          for(loopCounter4 = 0; loopCounter4 < 6;)
          {
            loopCounter4 = loopCounter4 + 1;
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          }
        }
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.Pooling_from.GetCurrentPosition() > 0 && ML_STAR.Pooling_from.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Pooling_from.SetMax(ML_STAR.Pooling_from.GetTotal());
      ML_STAR.Pooling_to.SetMax(ML_STAR.Pooling_to.GetTotal());
      ML_STAR.Pooling_from.SetCurrentPosition(1);
      ML_STAR.Pooling_to.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("***************************************************************************\nReplace lids on Primer_Plate and PCR_Plate\n***************************************************************************"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Pooling_Plate_Lid_Parking, ML_STAR.Pooling_Plate_lid, 0, 1, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_Lid_Parking, ML_STAR.PCR_Plate_lid, 1, 1, ML_STAR);
    CleanUp();
    ISWAP_PLATEANDLIDMOVEMENT::_ExitLibrary();
    NIST_TRUSEQNANO_PROCESSES::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    NIST_DEVICE_CONTROLLERS::_ExitLibrary();
    NIST_TRUSEQNANO_PREP::_ExitLibrary();
  } }
