private function CleanUp(  ) void ;
private function Initialize_HHS( variable & var_Local_DeviceID, variable var_Local_Node ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function Initialize_HHS( variable & var_Local_DeviceID, variable var_Local_Node ) void {
  private dialog customDialog_1;
  private variable bln_Local_HHSInitReturn;
  private variable int_Global_ReturnDialog;
  private variable loopCounter20;
  var_Local_DeviceID = 0;
  MECC::TraceComment(Translate("==================================================================================================================================\nInitialize_HHS Start\n=================================================================================================================================="));
  Trace ("==================================================================================================================================");
  Trace ("Initializing HHS Located at Node:  ", var_Local_Node);
  Trace ("==================================================================================================================================");
  {
    loopCounter20 = 0;
    while (1 == 1)
    {
      loopCounter20 = loopCounter20 + 1;
      HSLHamHeaterShaker::SetSimulation(bln_Global_SimulatorMode);
      bln_Local_HHSInitReturn = HSLHamHeaterShaker::CreateUsbDevice(var_Local_Node, var_Local_DeviceID);
      if (bln_Local_HHSInitReturn != 0)
      {
        MECC::TraceComment(Translate("==================================================================================================================================\nFailed to Initialize HHS\n=================================================================================================================================="));
        HSLHamHeaterShaker::Terminate();
        customDialog_1.InitCustomDialog("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");
        customDialog_1.ShowCustomDialog();
        int_Global_ReturnDialog = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
        if (int_Global_ReturnDialog == 2)
        {
          MECC::TraceComment(Translate("==================================================================================================================================\nMethod Aborted\n=================================================================================================================================="));
          abort;
        }
      }
      else
      {
        break;
      }
    }
  }
  MECC::TraceComment(Translate("==================================================================================================================================\nInitialize_HHS Finish\n=================================================================================================================================="));
}

private function CleanUp(  ) void {
  MECC::TraceComment(Translate("***************************************************************************\nCleanUp() submethod\n***************************************************************************"));
  HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
  NIST_DEVICE_CONTROLLERS::TerminateHHSs();
  NIST_DEVICE_CONTROLLERS::TerminateODTC(ODTC);
}

private function StartUp(  ) void {
  private dialog dialogHandle_2;
  private dialog dialogHandle_3;
  private dialog dialogHandle_4;
  private dialog customDialog_5;
  private dialog customDialog_6;
  private variable user_choice;
  private dialog customDialog_7;
  MECC::TraceComment(Translate("***************************************************************************\nStartUp() submethod\n***************************************************************************"));
  primer_mix_volume = 100;
  dialogHandle_4.SetInputSize(1);
  dialogHandle_4.SetInputField(0, Translate("Primer mixing volume?"), hslFloat, primer_mix_volume, 0, 200);
  dialogHandle_4.ShowInput(Translate("Select mixing volume for Primer Plate (or zero for no primer mixing)"), hslInfinite, hslOKOnly | hslDefButton1);
  primer_mix_volume = dialogHandle_4.GetInputField(0);
  user_choice = 1;
  customDialog_6.InitCustomDialog("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");
  customDialog_6.ShowCustomDialog();
  user_choice = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
  if (user_choice == 2)
  {
    abort;
  }
  customDialog_5.InitCustomDialog("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");
  customDialog_5.ShowCustomDialog();
  user_choice = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
  if (user_choice == 2)
  {
    abort;
  }
  SeqEdit2(ML_STAR.MlStar50ulTipWithFilter, ML_STAR, Translate("Edit Tip Sequence for 50 uL Tips"), Translate("Verify and/or edit the 50 uL tip sequence:"), 300, Translate(""), 0, ML_STAR.MlStar50ulTipWithFilter, 1, Translate(""));
  SeqEdit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR, Translate("Edit Tip Sequence for 300 uL Tips"), Translate("Verify and/or edit the 300 uL tip sequence:"), 300, Translate(""), 0, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 1, Translate(""));
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  bln_Global_SimulatorMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
  str_Global_ODTCIPAddress = Translate("192.168.88.253");
  var_Global_HHSNode3 = 3;
  SetTempHHS3 = 20;
  Initialize_HHS(HHS3, var_Global_HHSNode3);
  NIST_TRUSEQNANO_PREP::SetHHSTemperature(HHS3, SetTempHHS3);
  HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
  NIST_DEVICE_CONTROLLERS::InitODTC(str_Global_ODTCIPAddress, ODTC);
  NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
  customDialog_7.InitCustomDialog("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");
  customDialog_7.ShowCustomDialog();
  user_choice = customDialog_7.GetCustomDialogProperty( "ReturnValue" );
  if (user_choice == 2)
  {
    abort;
  }
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
}
