 namespace _Method { #include "Common\\iSWAP-PlateAndLidMovement.hs_" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_Device_Controllers.hs_" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_TruSeqNano_Prep.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
#include "Post-Selection PCR and clean-up.24 samples.res"
variable bln_Global_SimulatorMode;
variable str_Global_ODTCIPAddress;
variable ODTC;
variable odtc_script_path;
variable odtc_script_time;
variable odtc_script_id;
variable var_Global_HHSNode3;
variable HHS3;
variable SetTempHHS3;
variable pipette_volume;
variable loopCounter3;
variable loopCounter5;
variable loopCounter1;
variable loopCounter2;
variable loopCounter6;
variable is_debugging;
dialog dialogHandle_1;
dialog dialogHandle_2;
dialog dialogHandle_3;
dialog dialogHandle_4;
dialog dialogHandle_5;
global device ML_STAR ("Post-Selection PCR and clean-up.24 samples.lay", "ML_STAR", hslTrue);
global device HxFan ("Post-Selection PCR and clean-up.24 samples.lay", "HxFan", hslTrue);
sequence Sample_Plate_arr[];
sequence Sample_Plate;
dialog dialogHandle_6;
variable sample_volume;
variable bead_ratio;
variable bead_volume;
variable pcr_time;
variable pipetting_time;
variable wait_time;
timer timer1;
variable mix_volume;
variable empty_disp;
timer magnet_timer;
timer timer2;
timer timer3;
variable time_point;
dialog dialogHandle_7;
dialog dialogHandle_8;
variable elution_vol;
variable bln_Global_SkipAllTimers;
variable timer_2_min;
variable timer_5_min;
variable timer_3_min;
sequence Pooling_arr[];
sequence Pooling_to;
variable user_choice;
variable loopCounter4;
dialog dialogHandle_9;
variable Bead_stock_volume;
variable Beads_used;
variable sample_mix_volume;
variable timer_10_sec;
variable timer_4_min;
sequence No_pooling_arr[];
sequence No_pooling_to;
variable pool_samples;
dialog customDialog_10;
variable time_lid_move;
timer lid_move_timer;
dialog dialogHandle_11;
variable is_pipetting;
dialog dialogHandle_12;
dialog dialogHandle_13;
dialog dialogHandle_14;
variable z_shift;
variable PCR_plate_stack_height;
sequence PCR_stack_arr[];
sequence PCR_stack_get;
variable is_ramR_experiment;
variable is_lacI_experiment;
variable is_bead_ratio_test_exp;
variable lacI_ratio_1_1;
variable ramR_ratio_1_1;
variable lacI_ratio_1_2;
variable ramR_ratio_1_2;
variable lacI_ratio_2;
variable ramR_ratio_2;
variable lacI_str;
variable ratio_1_1_str;
variable ratio_1_2_str;
variable ratio_2_str;
variable ramR_str;
variable confirm_str;
variable time_point_str;
variable bead_ratio_arr[];
variable bead_ratio_test_arr_1_2[];
variable bead_ratio_test_arr_2[];
variable loopCounter7;
variable bead_volume_arr[];
variable sample_mix_vol_arr[];
dialog dialogHandle_15;
sequence MM_w_Rev_Primer_arr[];
sequence MM_w_Rev_Primer;
variable is_running_ODTC;
dialog dialogHandle_16;
dialog dialogHandle_17;
dialog dialogHandle_18;
dialog dialogHandle_19;
dialog dialogHandle_20;
dialog dialogHandle_21;
dialog dialogHandle_22;
dialog dialogHandle_23;
dialog dialogHandle_24;
dialog dialogHandle_25;
dialog dialogHandle_26;
dialog dialogHandle_27;
dialog dialogHandle_28;
dialog dialogHandle_29;
dialog dialogHandle_30;
dialog dialogHandle_31;
variable use_manual_thermocycler;
variable use_ODTC;
sequence disp_seq;
dialog dialogHandle_32;
dialog dialogHandle_33;
dialog dialogHandle_34;
dialog dialogHandle_35;
sequence asp_seq;
dialog dialogHandle_36;
dialog dialogHandle_37;
dialog dialogHandle_38;
dialog customDialog_39;
dialog customDialog_40;
dialog customDialog_41;
dialog customDialog_42;
variable is_primer_test;
variable run_restriction_step;
dialog dialogHandle_43;
dialog customDialog_44;
dialog dialogHandle_45;
dialog dialogHandle_46;
dialog customDialog_47;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ISWAP_PLATEANDLIDMOVEMENT::_InitLibrary();
    NIST_DEVICE_CONTROLLERS::_InitLibrary();
    NIST_TRUSEQNANO_PREP::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    bln_Global_SimulatorMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    is_debugging = "false";
    is_running_ODTC = "true";
    bln_Global_SkipAllTimers = 0;
    is_pipetting = "true";
    if (bln_Global_SimulatorMode == 1)
    {
      bln_Global_SkipAllTimers = 1;
    }
    if (bln_Global_SkipAllTimers == 1)
    {
      timer_2_min = 1;
      timer_3_min = 1;
      timer_4_min = 1;
      timer_5_min = 1;
      timer_10_sec = 1;
    }
    else
    {
      timer_2_min = 120;
      timer_3_min = 180;
      timer_4_min = 240;
      timer_5_min = 300;
      timer_10_sec = 10;
    }
    StartUp();
    if (time_point < 4)
    {
      z_shift = 3 - time_point;
      PCR_plate_stack_height = 12.5;
      z_shift = z_shift * PCR_plate_stack_height;
      z_shift = z_shift + 11.5;
      LMSF_UTILITIES::SeqZShift(ML_STAR.PCR_Plate_Lid_Parking, z_shift, ML_STAR);
    }
    Bead_stock_volume = 25000;
    Beads_used = 0;
    Beads_used = Beads_used * 1.6;
    Trace ("Bead stock remaining:  ", Bead_stock_volume);
    Sample_Plate_arr.SetSize(0);
    Sample_Plate_arr.AddAsLast(ML_STAR.Sample_Plate_1);
    Sample_Plate_arr.AddAsLast(ML_STAR.Sample_Plate_2);
    Sample_Plate_arr.AddAsLast(ML_STAR.Sample_Plate_3);
    Sample_Plate_arr.AddAsLast(ML_STAR.Sample_Plate_4);
    Sample_Plate=Sample_Plate_arr.GetAt(time_point-1);
    MM_w_Rev_Primer_arr.SetSize(0);
    MM_w_Rev_Primer_arr.AddAsLast(ML_STAR.MM_w_R_primers_1);
    MM_w_Rev_Primer_arr.AddAsLast(ML_STAR.MM_w_R_primers_2);
    MM_w_Rev_Primer_arr.AddAsLast(ML_STAR.MM_w_R_primers_3);
    MM_w_Rev_Primer_arr.AddAsLast(ML_STAR.MM_w_R_primers_4);
    MM_w_Rev_Primer=MM_w_Rev_Primer_arr.GetAt(time_point-1);
    Pooling_arr.SetSize(0);
    Pooling_arr.AddAsLast(ML_STAR.Pooling_Plate_1);
    Pooling_arr.AddAsLast(ML_STAR.Pooling_Plate_2);
    Pooling_arr.AddAsLast(ML_STAR.Pooling_Plate_3);
    Pooling_arr.AddAsLast(ML_STAR.Pooling_Plate_4);
    Pooling_to=Pooling_arr.GetAt(time_point-1);
    No_pooling_arr.SetSize(0);
    No_pooling_arr.AddAsLast(ML_STAR.No_pooling_1);
    No_pooling_arr.AddAsLast(ML_STAR.No_pooling_2);
    No_pooling_arr.AddAsLast(ML_STAR.No_pooling_3);
    No_pooling_arr.AddAsLast(ML_STAR.No_pooling_4);
    No_pooling_to=No_pooling_arr.GetAt(time_point-1);
    PCR_stack_arr.SetSize(0);
    if (use_ODTC == 1)
    {
      PCR_stack_arr.AddAsLast(ML_STAR.PCR_plate_stack_0004);
      PCR_stack_arr.AddAsLast(ML_STAR.PCR_plate_stack_0003);
      PCR_stack_arr.AddAsLast(ML_STAR.PCR_plate_stack_0002);
      PCR_stack_arr.AddAsLast(ML_STAR.PCR_plate_stack_0001);
      PCR_stack_get=PCR_stack_arr.GetAt(time_point-1);
      ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlate(PCR_stack_get, ML_STAR.PCR_Plate_full, 0, 1, ML_STAR);
    }
    MECC::TraceComment(Translate("=======================================================\nRestriction Digest Step\n======================================================="));
    if (is_pipetting == "true")
    {
      if (run_restriction_step == 1)
      {
        MECC::TraceComment(Translate("***************************************************************************\nPre-heat ODTC for restriction digest\n***************************************************************************"));
        if (bln_Global_SimulatorMode == 0)
        {
          NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
          if (is_running_ODTC == "true")
          {
            odtc_script_path = "C:\\Program Files (x86)\\HAMILTON\\Methods\\GSF-IMS Project\\E. coli Methods\\Post-Selection PCR Prep\\Restriction_Initialization.xml";
            NIST_DEVICE_CONTROLLERS::StartScriptODTC(ODTC, odtc_script_path, odtc_script_time, odtc_script_id);
          }
        }
      }
    }
    MECC::TraceComment(Translate("***************************************************************************\nRemove lids from PCR_Plate, Sample_Plate, and Reagent_Plate\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_1.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_1.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Reagent_Plate_lid, ML_STAR.Reagent_plate_lid_parking, 0, 1, ML_STAR);
    if (use_ODTC == 1)
    {
      ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Sample_Plate_lid, ML_STAR.Sample_Plate_Lid_Parking, 0, 1, ML_STAR);
      ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_Lid_Parking, 1, 1, ML_STAR);
    }
    else
    {
      ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Sample_Plate_lid, ML_STAR.Sample_Plate_Lid_Parking, 1, 1, ML_STAR);
    }
    if (is_pipetting == "true")
    {
      MECC::TraceComment(Translate("***************************************************************************\nTransfer DNA template from Sample Plate to PCR plate\n***************************************************************************"));
      if (is_debugging == "true")
      {
        dialogHandle_13.SetOutput(Translate("Click 'OK' to continue."));
        dialogHandle_13.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
      pipette_volume = 35;
      mix_volume = 25;
      if (use_ODTC == 1)
      {
        SeqCopySequence(disp_seq, ML_STAR.PCR_Plate_1);
      }
      else
      {
        SeqCopySequence(disp_seq, ML_STAR.PCR_Plate_manual_1);
      }
      {
        loopCounter3 = 0;
        while (
           (Sample_Plate.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, Sample_Plate, 1, disp_seq, 1);
          loopCounter3 = loopCounter3 + 1;
          TipPickupWithErrorHandling(ML_STAR.MlStar50ulTipWithFilter);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (Sample_Plate.GetCurrentPosition() > 0 && Sample_Plate.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        Sample_Plate.SetMax(Sample_Plate.GetTotal());
        disp_seq.SetMax(disp_seq.GetTotal());
        Sample_Plate.SetCurrentPosition(1);
        disp_seq.SetCurrentPosition(1);
      }
      MECC::TraceComment(Translate("***************************************************************************\nAdd Enzyme to PCR plate\n***************************************************************************"));
      if (is_debugging == "true")
      {
        dialogHandle_12.SetOutput(Translate("Click 'OK' to continue."));
        dialogHandle_12.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
      pipette_volume = 10;
      mix_volume = 35;
      {
        loopCounter1 = 0;
        disp_seq.SetCurrentPosition(1);
        while (
           (disp_seq.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, disp_seq, 1);
          loopCounter1 = loopCounter1 + 1;
          TipPickupWithErrorHandling(ML_STAR.MlStar50ulTipWithFilter);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (disp_seq.GetCurrentPosition() > 0 && disp_seq.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        disp_seq.SetMax(disp_seq.GetTotal());
        disp_seq.SetCurrentPosition(1);
      }
    }
    MECC::TraceComment(Translate("***************************************************************************\nReplace lids on PCR_Plate, Sample_Plate, and Reagent_Plate\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_2.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_2.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if (use_ODTC == 1)
    {
      ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_Lid_Parking, ML_STAR.PCR_Plate_lid, 0, 1, ML_STAR);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Sample_Plate_Lid_Parking, ML_STAR.Sample_Plate_lid, 0, 1, ML_STAR);
    if (run_restriction_step == 1)
    {
      ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.Reagent_plate_lid_parking, ML_STAR.Reagent_Plate_lid, 0, 1, ML_STAR);
    }
    if (run_restriction_step == 1)
    {
      if (use_ODTC == 1)
      {
        MECC::TraceComment(Translate("***************************************************************************\nWait for ODTC lid pre-heating method, \nthen open ODTC, move PCR plate to ODTC, close ODTC and run restriction incubation method\n***************************************************************************"));
        if (is_debugging == "true")
        {
          dialogHandle_43.SetOutput(Translate("Click 'OK' to continue."));
          dialogHandle_43.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        }
        if (bln_Global_SimulatorMode == 0)
        {
          if (is_running_ODTC == "true")
          {
            NIST_DEVICE_CONTROLLERS::WaitForScriptODTC(ODTC, odtc_script_time, odtc_script_id);
          }
          NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
        }
        if (is_debugging == "true")
        {
          dialogHandle_45.SetOutput(Translate("Click 'OK' to continue."));
          dialogHandle_45.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        }
        ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlateWithLid(ML_STAR.PCR_Plate_move, ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_ODTC_move, ML_STAR.PCR_Plate_ODTC_lid, 0, 0, ML_STAR);
        if (is_pipetting == "true")
        {
          if (bln_Global_SimulatorMode == 0)
          {
            NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
            if (is_running_ODTC == "true")
            {
              odtc_script_path = "C:\\Program Files (x86)\\HAMILTON\\Methods\\GSF-IMS Project\\E. coli Methods\\Post-Selection PCR Prep\\Restriction_Incubation.xml";
              NIST_DEVICE_CONTROLLERS::StartScriptODTC(ODTC, odtc_script_path, odtc_script_time, odtc_script_id);
            }
          }
        }
      }
      else
      {
        customDialog_44.InitCustomDialog("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");
        customDialog_44.ShowCustomDialog();
      }
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveEppendorf350uLElutionPlateWithLid(ML_STAR.Sample_Plate_full, ML_STAR.Sample_Plate_lid, ML_STAR.Elution_Plate_Parking, ML_STAR.Elution_Plate_Parking_lid, 0, 1, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveEppendorf350uLElutionPlateWithLid(ML_STAR.Pooling_Plate_Parking, ML_STAR.Pooling_Plate_Parking_lid, ML_STAR.Pooling_Plate, ML_STAR.Pooling_Plate_lid, 0, 1, ML_STAR);
    if (use_ODTC == 1)
    {
      if (run_restriction_step == 1)
      {
        MECC::TraceComment(Translate("***************************************************************************\nWait for ODTC incubation to finish, then move PCR plate from ODTC\n***************************************************************************"));
        if (is_debugging == "true")
        {
          dialogHandle_46.SetOutput(Translate("Click 'OK' to continue."));
          dialogHandle_46.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        }
        if (bln_Global_SimulatorMode == 0)
        {
          if (is_running_ODTC == "true")
          {
            NIST_DEVICE_CONTROLLERS::WaitForScriptODTC(ODTC, odtc_script_time, odtc_script_id);
          }
          NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
        }
        ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlateWithLid(ML_STAR.PCR_Plate_ODTC_move, ML_STAR.PCR_Plate_ODTC_lid, ML_STAR.PCR_Plate_move, ML_STAR.PCR_Plate_lid, 0, 0, ML_STAR);
      }
      MECC::TraceComment(Translate("***************************************************************************\nClose ODTC, and run PCR pre-heat method on ODTC\n***************************************************************************"));
      if (is_pipetting == "true")
      {
        if (is_debugging == "true")
        {
          dialogHandle_35.SetOutput(Translate("Click 'OK' to continue."));
          dialogHandle_35.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        }
        if (bln_Global_SimulatorMode == 0)
        {
          NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
          if (is_running_ODTC == "true")
          {
            odtc_script_path = "C:\\Program Files (x86)\\HAMILTON\\Methods\\GSF-IMS Project\\E. coli Methods\\Post-Selection PCR Prep\\PCR_Initialization.xml";
            NIST_DEVICE_CONTROLLERS::StartScriptODTC(ODTC, odtc_script_path, odtc_script_time, odtc_script_id);
          }
        }
      }
    }
    else
    {
      if (run_restriction_step == 1)
      {
        customDialog_47.InitCustomDialog("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");
        customDialog_47.ShowCustomDialog();
      }
    }
    MECC::TraceComment(Translate("=======================================================\nFirst PCR Step\n======================================================="));
    MECC::TraceComment(Translate("***************************************************************************\nRemove lid from PCR_Plate\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_3.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_3.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if (use_ODTC == 1)
    {
      ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_Lid_Parking, 1, 1, ML_STAR);
    }
    MECC::TraceComment(Translate("**************************************************************************\nRemove lid from Reagent_Plate\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_15.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_15.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if (run_restriction_step == 1)
    {
      ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.Reagent_Plate_lid, ML_STAR.Reagent_plate_lid_parking, 1, 1, ML_STAR);
    }
    MECC::TraceComment(Translate("***************************************************************************\nAdd Master mix with Primers to PCR plate\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_4.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_4.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if (is_pipetting == "true")
    {
      pipette_volume = 28.125;
      mix_volume = 50;
      if (use_ODTC == 1)
      {
        SeqCopySequence(disp_seq, ML_STAR.PCR_Plate_1);
      }
      else
      {
        SeqCopySequence(disp_seq, ML_STAR.PCR_Plate_manual_1);
      }
      MECC::TraceComment(Translate("***** F primers *****"));
      if (is_primer_test == 1)
      {
        MECC::TraceComment(Translate("*** test pattern ***"));
        SeqCopySequence(asp_seq, ML_STAR.MM_w_F_primers_test);
      }
      else
      {
        SeqCopySequence(asp_seq, ML_STAR.MM_w_F_primers);
      }
      {
        loopCounter6 = 0;
        disp_seq.SetCurrentPosition(1);
        while (
           (disp_seq.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, disp_seq, 1);
          loopCounter6 = loopCounter6 + 1;
          TipPickupWithErrorHandling(ML_STAR.MlStar50ulTipWithFilter);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (disp_seq.GetCurrentPosition() > 0 && disp_seq.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        disp_seq.SetMax(disp_seq.GetTotal());
        disp_seq.SetCurrentPosition(1);
      }
      MECC::TraceComment(Translate("***** R primers *****"));
      if (is_primer_test == 1)
      {
        MECC::TraceComment(Translate("*** test pattern ***"));
        SeqCopySequence(asp_seq, ML_STAR.MM_w_R_primers_test);
      }
      else
      {
        SeqCopySequence(asp_seq, MM_w_Rev_Primer);
      }
      {
        loopCounter6 = 0;
        disp_seq.SetCurrentPosition(1);
        while (
           (disp_seq.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, asp_seq, 1, disp_seq, 1);
          loopCounter6 = loopCounter6 + 1;
          TipPickupWithErrorHandling(ML_STAR.MlStar50ulTipWithFilter);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (disp_seq.GetCurrentPosition() > 0 && disp_seq.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        asp_seq.SetMax(asp_seq.GetTotal());
        disp_seq.SetMax(disp_seq.GetTotal());
        asp_seq.SetCurrentPosition(1);
        disp_seq.SetCurrentPosition(1);
      }
    }
    MECC::TraceComment(Translate("***************************************************************************\nReplace lid on PCR_Plate and Reagent_Plate\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_5.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_5.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if (use_ODTC == 1)
    {
      ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_Lid_Parking, ML_STAR.PCR_Plate_lid, 0, 1, ML_STAR);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.Reagent_plate_lid_parking, ML_STAR.Reagent_Plate_lid, 0, 1, ML_STAR);
    if (use_ODTC == 1)
    {
      MECC::TraceComment(Translate("***************************************************************************\nWait for ODTC lid pre-heating method, \nthen open ODTC, move PCR plate to ODTC, close ODTC and run step 1 PCR method\n***************************************************************************"));
      if (is_debugging == "true")
      {
        dialogHandle_32.SetOutput(Translate("Click 'OK' to continue."));
        dialogHandle_32.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
      if (bln_Global_SimulatorMode == 0)
      {
        if (is_running_ODTC == "true")
        {
          NIST_DEVICE_CONTROLLERS::WaitForScriptODTC(ODTC, odtc_script_time, odtc_script_id);
        }
        NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
      }
      ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlateWithLid(ML_STAR.PCR_Plate_move, ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_ODTC_move, ML_STAR.PCR_Plate_ODTC_lid, 0, 0, ML_STAR);
      if (is_pipetting == "true")
      {
        if (bln_Global_SimulatorMode == 0)
        {
          NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
          if (is_running_ODTC == "true")
          {
            odtc_script_path = "C:\\Program Files (x86)\\HAMILTON\\Methods\\GSF-IMS Project\\E. coli Methods\\Post-Selection PCR Prep\\PCR_Step_1.xml";
            NIST_DEVICE_CONTROLLERS::StartScriptODTC(ODTC, odtc_script_path, odtc_script_time, odtc_script_id);
          }
        }
      }
    }
    else
    {
      customDialog_40.InitCustomDialog("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");
      customDialog_40.ShowCustomDialog();
    }
    pcr_time = 646;
    pipetting_time = 300;
    wait_time = pcr_time - pipetting_time;
    wait_time = wait_time + 120;
    if (bln_Global_SkipAllTimers == 1)
    {
      wait_time = 1;
    }
    if( 0 == timer1.SetTimer(wait_time) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == timer1.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("***************************************************************************\nFirst PCR clean-up;\nAdd beads to Midi plate\nFinish PCR; Remove lid from PCR_Plate;\nbind plasmid DNA to the beads and keep the supernatant\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_6.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_6.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    sample_volume = 90;
    bead_ratio = 0.6;
    if (is_lacI_experiment == 1)
    {
      bead_ratio = lacI_ratio_1_1;
    }
    if (is_ramR_experiment == 1)
    {
      bead_ratio = ramR_ratio_1_1;
    }
    if (is_bead_ratio_test_exp == 1)
    {
      bead_ratio = 0.6;
    }
    TrcTrace4(Translate("************ Pipetting beads with ratio: "), bead_ratio, Translate(" ******************"), Translate(""));
    bead_volume = bead_ratio * sample_volume;
    sample_mix_volume = sample_volume + bead_volume;
    sample_mix_volume = sample_mix_volume * 0.75;
    if (sample_mix_volume > 300)
    {
      sample_mix_volume = 300;
    }
    Add_AmpureSingle(ML_STAR.Bead_Stock, ML_STAR.Midi_on_HHS_1, bead_volume, 0, 0, Translate("1_1"));
    if (use_ODTC == 1)
    {
      MECC::TraceComment(Translate("***************************************************************************\nWait for PCR method to finish, then move PCR plate from ODTC, and take lid off of PCR plate\n***************************************************************************"));
      if (is_debugging == "true")
      {
        dialogHandle_33.SetOutput(Translate("Click 'OK' to continue."));
        dialogHandle_33.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
      if (bln_Global_SimulatorMode == 0)
      {
        if (is_running_ODTC == "true")
        {
          NIST_DEVICE_CONTROLLERS::WaitForScriptODTC(ODTC, odtc_script_time, odtc_script_id);
        }
        NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
      }
      ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlateWithLid(ML_STAR.PCR_Plate_ODTC_move, ML_STAR.PCR_Plate_ODTC_lid, ML_STAR.PCR_Plate_move, ML_STAR.PCR_Plate_lid, 0, 0, ML_STAR);
      ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_Lid_Parking, 1, 1, ML_STAR);
      MECC::TraceComment(Translate("***************************************************************************\nClose ODTC, and run PCR pre-heat method on ODTC\n***************************************************************************"));
      if (is_debugging == "true")
      {
        dialogHandle_34.SetOutput(Translate("Click 'OK' to continue."));
        dialogHandle_34.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
      if (is_pipetting == "true")
      {
        if (bln_Global_SimulatorMode == 0)
        {
          NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
          if (is_running_ODTC == "true")
          {
            odtc_script_path = "C:\\Program Files (x86)\\HAMILTON\\Methods\\GSF-IMS Project\\E. coli Methods\\Post-Selection PCR Prep\\PCR_Initialization.xml";
            NIST_DEVICE_CONTROLLERS::StartScriptODTC(ODTC, odtc_script_path, odtc_script_time, odtc_script_id);
          }
        }
      }
    }
    else
    {
      customDialog_42.InitCustomDialog("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");
      customDialog_42.ShowCustomDialog();
    }
    MECC::TraceComment(Translate("=================================================\nShake Midi plate for ten seconds to resuspend beads;\nTransfer samples from PCR plate to Midi plate; \nMix by pipetting 10x;\nand incubate two additional minutes without shaking\n================================================="));
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
      HSLHamHeaterShaker::StartShaker(HHS3, 1800);
    }
    MECC::TraceComment(Translate("***** Now shaking at RT for 10s ......."));
    if( 0 == timer3.SetTimer(timer_10_sec) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 10 sec shaking timer ****"));
    if( 0 == timer3.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::StopShaker(HHS3);
    }
    if (is_pipetting == "true")
    {
      if (use_ODTC == 1)
      {
        SeqCopySequence(asp_seq, ML_STAR.PCR_Plate_1);
      }
      else
      {
        SeqCopySequence(asp_seq, ML_STAR.PCR_Plate_manual_1);
      }
      HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
      {
        loopCounter4 = 0;
        ML_STAR.Midi_on_HHS_1.SetCurrentPosition(1);
        asp_seq.SetCurrentPosition(1);
        while (
           (ML_STAR.Midi_on_HHS_1.GetCurrentPosition() > 0)
        && (asp_seq.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.Midi_on_HHS_1, 1, asp_seq, 1);
          loopCounter4 = loopCounter4 + 1;
          TipPickupWithErrorHandling(ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (ML_STAR.Midi_on_HHS_1.GetCurrentPosition() > 0 && ML_STAR.Midi_on_HHS_1.GetMax() == 0 )
          && (asp_seq.GetCurrentPosition() > 0 && asp_seq.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.Midi_on_HHS_1.SetMax(ML_STAR.Midi_on_HHS_1.GetTotal());
        asp_seq.SetMax(asp_seq.GetTotal());
        ML_STAR.Midi_on_HHS_1.SetCurrentPosition(1);
        asp_seq.SetCurrentPosition(1);
      }
      HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    }
    MECC::TraceComment(Translate("***** Now incubating at RT for 5 min ......."));
    if( 0 == timer2.SetTimer(timer_5_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 5 minute timer for RT incubation ****"));
    if (use_ODTC == 1)
    {
      ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_Lid_Parking, ML_STAR.PCR_Plate_lid, 1, 1, ML_STAR);
    }
    if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    MECC::TraceComment(Translate("***** Incubation finished..."));
    MECC::TraceComment(Translate("=======================================================\nMove Midi plate to magnet, incubate 5 minutes,\nthen transfer supernatant to columns 4-6 in Midi plate;\nincubate 5 more minutes; then transfer supernatant to columns 7-9 in Midi plate\nmove Midi plate to HHS\n======================================================="));
    if (is_debugging == "true")
    {
      dialogHandle_16.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_16.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("**** on magnet..."));
    if( 0 == magnet_timer.SetTimer(timer_2_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 2 minute timer for magnet ****"));
    if( 0 == magnet_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** done."));
    if (is_debugging == "true")
    {
      dialogHandle_17.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_17.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if (is_pipetting == "true")
    {
      pipette_volume = sample_volume + bead_volume;
      {
        loopCounter4 = 0;
        ML_STAR.Midi_on_magnet_1.SetCurrentPosition(1);
        ML_STAR.Midi_on_magnet_2.SetCurrentPosition(1);
        while (
           (ML_STAR.Midi_on_magnet_1.GetCurrentPosition() > 0)
        && (ML_STAR.Midi_on_magnet_2.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.Midi_on_magnet_1, 1, ML_STAR.Midi_on_magnet_2, 1);
          loopCounter4 = loopCounter4 + 1;
          TipPickupWithErrorHandling(ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (ML_STAR.Midi_on_magnet_1.GetCurrentPosition() > 0 && ML_STAR.Midi_on_magnet_1.GetMax() == 0 )
          && (ML_STAR.Midi_on_magnet_2.GetCurrentPosition() > 0 && ML_STAR.Midi_on_magnet_2.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.Midi_on_magnet_1.SetMax(ML_STAR.Midi_on_magnet_1.GetTotal());
        ML_STAR.Midi_on_magnet_2.SetMax(ML_STAR.Midi_on_magnet_2.GetTotal());
        ML_STAR.Midi_on_magnet_1.SetCurrentPosition(1);
        ML_STAR.Midi_on_magnet_2.SetCurrentPosition(1);
      }
    }
    MECC::TraceComment(Translate("**** 3 minute timer for magnet ****"));
    if( 0 == magnet_timer.SetTimer(timer_3_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == magnet_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** Second supernatant transfer to make sure all beads are stuck to magnet"));
    if (is_debugging == "true")
    {
      dialogHandle_18.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_18.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if (is_pipetting == "true")
    {
      pipette_volume = pipette_volume - 10;
      {
        loopCounter4 = 0;
        ML_STAR.Midi_on_magnet_2.SetCurrentPosition(1);
        ML_STAR.Midi_on_magnet_3.SetCurrentPosition(1);
        while (
           (ML_STAR.Midi_on_magnet_2.GetCurrentPosition() > 0)
        && (ML_STAR.Midi_on_magnet_3.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.Midi_on_magnet_2, 1, ML_STAR.Midi_on_magnet_3, 1);
          loopCounter4 = loopCounter4 + 1;
          TipPickupWithErrorHandling(ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (ML_STAR.Midi_on_magnet_2.GetCurrentPosition() > 0 && ML_STAR.Midi_on_magnet_2.GetMax() == 0 )
          && (ML_STAR.Midi_on_magnet_3.GetCurrentPosition() > 0 && ML_STAR.Midi_on_magnet_3.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.Midi_on_magnet_2.SetMax(ML_STAR.Midi_on_magnet_2.GetTotal());
        ML_STAR.Midi_on_magnet_3.SetMax(ML_STAR.Midi_on_magnet_3.GetTotal());
        ML_STAR.Midi_on_magnet_2.SetCurrentPosition(1);
        ML_STAR.Midi_on_magnet_3.SetCurrentPosition(1);
      }
    }
    MECC::TraceComment(Translate("**** Move plate to HHS"));
    if (is_debugging == "true")
    {
      dialogHandle_19.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_19.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_magnet, ML_STAR.Midi_on_HHS, 1, 1, ML_STAR);
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
    }
    MECC::TraceComment(Translate("=====================================================================\nNext step: bind PCR product to beads and discard the supernatant\n====================================================================="));
    bead_ratio = 0.6;
    if (is_lacI_experiment == 1)
    {
      bead_ratio = lacI_ratio_1_2;
    }
    if (is_ramR_experiment == 1)
    {
      bead_ratio = ramR_ratio_1_2;
    }
    if (is_bead_ratio_test_exp == 1)
    {
      bead_ratio_arr=bead_ratio_test_arr_1_2;
      bead_volume_arr.SetSize(0);
      sample_mix_vol_arr.SetSize(0);
      {
        for(loopCounter7 = 0; loopCounter7 < 3;)
        {
          loopCounter7 = loopCounter7 + 1;
          bead_ratio = bead_ratio_arr.ElementAt( loopCounter7 -1);
          bead_volume = bead_ratio * pipette_volume;
          sample_mix_volume = pipette_volume + bead_volume;
          sample_mix_volume = sample_mix_volume * 0.9;
          if (sample_mix_volume > 300)
          {
            sample_mix_volume = 300;
          }
          bead_volume_arr.AddAsLast(bead_volume);
          sample_mix_vol_arr.AddAsLast(sample_mix_volume);
        }
      }
      TrcTrace8(Translate("******************* "), Translate("Test: pipetting beads with ratios: "), bead_ratio_arr.ElementAt( 1 -1), Translate(", "), bead_ratio_arr.ElementAt( 2 -1), Translate(", "), bead_ratio_arr.ElementAt( 3 -1), Translate(" ************************"));
    }
    else
    {
      TrcTrace4(Translate("************ Pipetting beads with ratio: "), bead_ratio, Translate(" ******************"), Translate(""));
      bead_volume = bead_ratio * pipette_volume;
      sample_mix_volume = pipette_volume + bead_volume;
      sample_mix_volume = sample_mix_volume * 0.9;
      if (sample_mix_volume > 300)
      {
        sample_mix_volume = 300;
      }
    }
    if (is_debugging == "true")
    {
      dialogHandle_20.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_20.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    Add_AmpureSingle(ML_STAR.Bead_Stock, ML_STAR.Midi_on_HHS_3, bead_volume, 1, sample_mix_volume, Translate("1_2"));
    MECC::TraceComment(Translate("***** Now incubating at RT for 5min ......."));
    if( 0 == timer2.SetTimer(timer_5_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 5 minute timer for RT incubation ****"));
    if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("***** Incubation finished..."));
    MECC::TraceComment(Translate("=======================================================\nMove Midi plate to magnet, incubate 5 minutes,\nthen discard the supernatant\n======================================================="));
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    if (is_debugging == "true")
    {
      dialogHandle_21.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_21.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("**** on magnet..."));
    if( 0 == magnet_timer.SetTimer(timer_5_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 5 minute timer for magnet ****"));
    if( 0 == magnet_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** done."));
    if (is_debugging == "true")
    {
      dialogHandle_22.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_22.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if (is_pipetting == "true")
    {
      pipette_volume = pipette_volume + bead_volume;
      pipette_volume = pipette_volume + 10;
      Transfer_PlatetoWaste(ML_STAR.Midi_on_magnet_3, pipette_volume, Translate("Nano_SVF_EthanolWaste_JetEmpty_HigherAirTransport"));
    }
    MECC::TraceComment(Translate("===============================================================================\nEthanol rinse (1x), then resuspend sample in elution buffer, put plate on magnet, and wait 5 minutes\n==============================================================================="));
    if (is_debugging == "true")
    {
      dialogHandle_23.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_23.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    EthanolStep(ML_STAR.Midi_on_magnet_3, ML_STAR.Ethanol_85, 35, ML_STAR.DI_Water, ML_STAR.Midi_on_HHS_3);
    MECC::TraceComment(Translate("==================================================================================================================================\nRemove lid from Reagent_Plate and Move midi to Magnet\n=================================================================================================================================="));
    if (is_debugging == "true")
    {
      dialogHandle_24.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_24.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.Reagent_Plate_lid, ML_STAR.Reagent_plate_lid_parking, 0, 1, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 1, 1, ML_STAR);
    if( 0 == magnet_timer.SetTimer(timer_5_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("***************************************************************************\nRemove lid from PCR_Plate; and prep plate for Second PCR\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_25.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_25.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if (use_ODTC == 1)
    {
      ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_Lid_Parking, 1, 1, ML_STAR);
    }
    MECC::TraceComment(Translate("**** Prep PCR plate 2 ***"));
    if (is_debugging == "true")
    {
      dialogHandle_7.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_7.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if (is_pipetting == "true")
    {
      pipette_volume = 36;
      if (use_ODTC == 1)
      {
        SeqCopySequence(disp_seq, ML_STAR.PCR_Plate_2);
      }
      else
      {
        SeqCopySequence(disp_seq, ML_STAR.PCR_Plate_manual_2);
      }
      {
        loopCounter1 = 0;
        disp_seq.SetCurrentPosition(1);
        while (
           (disp_seq.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, disp_seq, 1);
          loopCounter1 = loopCounter1 + 1;
          TipPickupWithErrorHandling(ML_STAR.MlStar50ulTipWithFilter);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (disp_seq.GetCurrentPosition() > 0 && disp_seq.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        disp_seq.SetMax(disp_seq.GetTotal());
        disp_seq.SetCurrentPosition(1);
      }
    }
    MECC::TraceComment(Translate("==============================================================================\nWait for 5 minute magnet timer to finish, then pipette supernatant from Midi plate to new PCR plate\n=============================================================================="));
    MECC::TraceComment(Translate("**** 5 minute timer for magnet ****"));
    if( 0 == magnet_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (is_debugging == "true")
    {
      dialogHandle_26.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_26.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if (is_pipetting == "true")
    {
      pipette_volume = 30;
      {
        loopCounter4 = 0;
        ML_STAR.Midi_on_magnet_3.SetCurrentPosition(1);
        disp_seq.SetCurrentPosition(1);
        while (
           (ML_STAR.Midi_on_magnet_3.GetCurrentPosition() > 0)
        && (disp_seq.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.Midi_on_magnet_3, 1, disp_seq, 1);
          loopCounter4 = loopCounter4 + 1;
          TipPickupWithErrorHandling(ML_STAR.MlStar50ulTipWithFilter);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (ML_STAR.Midi_on_magnet_3.GetCurrentPosition() > 0 && ML_STAR.Midi_on_magnet_3.GetMax() == 0 )
          && (disp_seq.GetCurrentPosition() > 0 && disp_seq.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.Midi_on_magnet_3.SetMax(ML_STAR.Midi_on_magnet_3.GetTotal());
        disp_seq.SetMax(disp_seq.GetTotal());
        ML_STAR.Midi_on_magnet_3.SetCurrentPosition(1);
        disp_seq.SetCurrentPosition(1);
      }
    }
    MECC::TraceComment(Translate("***************************************************************************\nReplace lid on PCR_Plate;\nmove Midi plate to HHS; then put lid back on reagent plate\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_9.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_9.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if (use_ODTC == 1)
    {
      ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_Lid_Parking, ML_STAR.PCR_Plate_lid, 0, 1, ML_STAR);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_magnet, ML_STAR.Midi_on_HHS, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("***************************************************************************\nReplace lid on Reagent_Plate\n***************************************************************************"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.Reagent_plate_lid_parking, ML_STAR.Reagent_Plate_lid, 1, 1, ML_STAR);
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
    }
    if (use_ODTC == 1)
    {
      MECC::TraceComment(Translate("***************************************************************************\nWait for ODTC lid pre-heating method, \nthen open ODTC, move PCR plate to ODTC, close ODTC and run step 2 PCR method\n***************************************************************************"));
      if (is_debugging == "true")
      {
        dialogHandle_36.SetOutput(Translate("Click 'OK' to continue."));
        dialogHandle_36.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
      if (bln_Global_SimulatorMode == 0)
      {
        if (is_running_ODTC == "true")
        {
          NIST_DEVICE_CONTROLLERS::WaitForScriptODTC(ODTC, odtc_script_time, odtc_script_id);
        }
        NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
      }
      ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlateWithLid(ML_STAR.PCR_Plate_move, ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_ODTC_move, ML_STAR.PCR_Plate_ODTC_lid, 0, 0, ML_STAR);
      if (is_pipetting == "true")
      {
        if (bln_Global_SimulatorMode == 0)
        {
          NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
          if (is_running_ODTC == "true")
          {
            odtc_script_path = "C:\\Program Files (x86)\\HAMILTON\\Methods\\GSF-IMS Project\\E. coli Methods\\Post-Selection PCR Prep\\PCR_Step_2.xml";
            NIST_DEVICE_CONTROLLERS::StartScriptODTC(ODTC, odtc_script_path, odtc_script_time, odtc_script_id);
          }
        }
      }
    }
    else
    {
      customDialog_39.InitCustomDialog("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");
      customDialog_39.ShowCustomDialog();
    }
    pcr_time = 1504;
    pipetting_time = 300;
    wait_time = pcr_time - pipetting_time;
    if (bln_Global_SkipAllTimers == 1)
    {
      wait_time = 1;
    }
    if( 0 == timer1.SetTimer(wait_time) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("***************************************************************************\nSecond PCR clean-up;\nMove Midi to HHS;\nAdd beads to Midi plate\nFinish PCR; Remove lid from PCR_Plate;\nbind PCR product to the beads and discard the supernatant\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_8.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_8.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    sample_volume = 60;
    bead_ratio = 1.0;
    if (is_lacI_experiment == 1)
    {
      bead_ratio = lacI_ratio_2;
    }
    if (is_ramR_experiment == 1)
    {
      bead_ratio = ramR_ratio_2;
    }
    if (is_bead_ratio_test_exp == 1)
    {
      bead_ratio_arr=bead_ratio_test_arr_2;
      bead_volume_arr.SetSize(0);
      sample_mix_vol_arr.SetSize(0);
      {
        for(loopCounter7 = 0; loopCounter7 < 4;)
        {
          loopCounter7 = loopCounter7 + 1;
          bead_ratio = bead_ratio_arr.ElementAt( loopCounter7 -1);
          bead_volume = bead_ratio * sample_volume;
          sample_mix_volume = sample_volume + bead_volume;
          sample_mix_volume = sample_mix_volume * 0.75;
          if (sample_mix_volume > 300)
          {
            sample_mix_volume = 300;
          }
          bead_volume_arr.AddAsLast(bead_volume);
          sample_mix_vol_arr.AddAsLast(sample_mix_volume);
        }
      }
      TrcTrace8(Translate("******************* Test: pipetting beads with ratios: "), bead_ratio_arr.ElementAt( 1 -1), Translate(", "), bead_ratio_arr.ElementAt( 2 -1), Translate(", "), bead_ratio_arr.ElementAt( 3 -1), Translate(", "), bead_ratio_arr.ElementAt( 4 -1));
    }
    else
    {
      TrcTrace4(Translate("************ Pipetting beads with ratio: "), bead_ratio, Translate(" ******************"), Translate(""));
      bead_volume = bead_ratio * sample_volume;
      sample_mix_volume = sample_volume + bead_volume;
      sample_mix_volume = sample_mix_volume * 0.75;
      if (sample_mix_volume > 300)
      {
        sample_mix_volume = 300;
      }
    }
    MECC::TraceComment(Translate("**** timer waiting for second PCR ****"));
    if( 0 == timer1.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    Add_AmpureSingle(ML_STAR.Bead_Stock, ML_STAR.Midi_on_HHS_4, bead_volume, 0, 0, Translate("2"));
    if (use_ODTC == 1)
    {
      MECC::TraceComment(Translate("***************************************************************************\nWait for PCR method to finish, then move PCR plate from ODTC, and take lid off of PCR plate\n***************************************************************************"));
      if (is_debugging == "true")
      {
        dialogHandle_38.SetOutput(Translate("Click 'OK' to continue."));
        dialogHandle_38.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
      if (bln_Global_SimulatorMode == 0)
      {
        if (is_running_ODTC == "true")
        {
          NIST_DEVICE_CONTROLLERS::WaitForScriptODTC(ODTC, odtc_script_time, odtc_script_id);
        }
        NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
      }
      ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlateWithLid(ML_STAR.PCR_Plate_ODTC_move, ML_STAR.PCR_Plate_ODTC_lid, ML_STAR.PCR_Plate_move, ML_STAR.PCR_Plate_lid, 0, 0, ML_STAR);
      ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_Lid_Parking, 1, 1, ML_STAR);
      MECC::TraceComment(Translate("***************************************************************************\nClose ODTC\n***************************************************************************"));
      if (is_debugging == "true")
      {
        dialogHandle_37.SetOutput(Translate("Click 'OK' to continue."));
        dialogHandle_37.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
      if (is_pipetting == "true")
      {
        if (bln_Global_SimulatorMode == 0)
        {
          NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
        }
      }
    }
    else
    {
      customDialog_41.InitCustomDialog("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");
      customDialog_41.ShowCustomDialog();
    }
    MECC::TraceComment(Translate("=================================================\nShake midi plate for 10 seconds to resuspend beads;\nTransfer samples from PCR plate to Midi plate;\nMix by pipetting 10x;\nand incubate 5 additional minutes without shaking\n================================================="));
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
      HSLHamHeaterShaker::StartShaker(HHS3, 1800);
    }
    MECC::TraceComment(Translate("***** Now shaking at RT for 10s ......."));
    if( 0 == timer3.SetTimer(timer_10_sec) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 10 sec shaking timer ****"));
    if( 0 == timer3.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::StopShaker(HHS3);
    }
    if (is_debugging == "true")
    {
      dialogHandle_27.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_27.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if (is_pipetting == "true")
    {
      if (use_ODTC == 1)
      {
        SeqCopySequence(asp_seq, ML_STAR.PCR_Plate_2);
      }
      else
      {
        SeqCopySequence(asp_seq, ML_STAR.PCR_Plate_manual_2);
      }
      HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
      {
        loopCounter4 = 0;
        ML_STAR.Midi_on_HHS_4.SetCurrentPosition(1);
        asp_seq.SetCurrentPosition(1);
        while (
           (ML_STAR.Midi_on_HHS_4.GetCurrentPosition() > 0)
        && (asp_seq.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.Midi_on_HHS_4, 1, asp_seq, 1);
          loopCounter4 = loopCounter4 + 1;
          TipPickupWithErrorHandling(ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (ML_STAR.Midi_on_HHS_4.GetCurrentPosition() > 0 && ML_STAR.Midi_on_HHS_4.GetMax() == 0 )
          && (asp_seq.GetCurrentPosition() > 0 && asp_seq.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.Midi_on_HHS_4.SetMax(ML_STAR.Midi_on_HHS_4.GetTotal());
        asp_seq.SetMax(asp_seq.GetTotal());
        ML_STAR.Midi_on_HHS_4.SetCurrentPosition(1);
        asp_seq.SetCurrentPosition(1);
      }
      HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    }
    MECC::TraceComment(Translate("***** Now incubating at RT for 2min ......."));
    if( 0 == timer2.SetTimer(timer_5_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 5 minute timer for RT incubation ****"));
    if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("***** Incubation finished..."));
    MECC::TraceComment(Translate("=======================================================\nMove Midi plate to magnet, incubate 4 minutes,\nthen discard supernatant;\n======================================================="));
    if (is_debugging == "true")
    {
      dialogHandle_28.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_28.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("**** on magnet..."));
    if( 0 == magnet_timer.SetTimer(timer_4_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 4 minute timer for magnet ****"));
    if( 0 == magnet_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** done."));
    if (is_debugging == "true")
    {
      dialogHandle_29.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_29.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if (is_pipetting == "true")
    {
      pipette_volume = sample_volume + bead_volume;
      pipette_volume = pipette_volume + 10;
      Transfer_PlatetoWaste(ML_STAR.Midi_on_magnet_4, pipette_volume, Translate("Nano_SVF_EthanolWaste_JetEmpty_HigherAirTransport"));
    }
    MECC::TraceComment(Translate("===============================================================================\nEthanol rinse (1x), then resuspend sample in elution buffer, put plate on magnet, and wait 5 minutes\n==============================================================================="));
    if (is_debugging == "true")
    {
      dialogHandle_30.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_30.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    elution_vol = 50;
    EthanolStep(ML_STAR.Midi_on_magnet_4, ML_STAR.Ethanol_70, elution_vol, ML_STAR.Elution_Buffer, ML_STAR.Midi_on_HHS_4);
    MECC::TraceComment(Translate("==================================================================================================================================\nMove to Magnet\n=================================================================================================================================="));
    if (is_debugging == "true")
    {
      dialogHandle_31.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_31.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 1, 1, ML_STAR);
    if( 0 == magnet_timer.SetTimer(timer_5_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    time_lid_move = timer_5_min - 30;
    if (time_lid_move < 2)
    {
      time_lid_move = 2;
    }
    if( 0 == lid_move_timer.SetTimer(time_lid_move) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    pool_samples = 0;
    if(0){
      customDialog_10.InitCustomDialog("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");
      customDialog_10.SetCustomDialogProperty( "radioButton1.IsChecked", pool_samples );
      customDialog_10.ShowCustomDialog();
      pool_samples = customDialog_10.GetCustomDialogProperty( "radioButton1.IsChecked" );
    }
    if( 0 == lid_move_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("***************************************************************************\nRemove lid from Pooling_Plate\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_11.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_11.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Pooling_Plate_lid, ML_STAR.Pooling_Plate_Lid_Parking, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================================\nWait for 5 minute magnet timer to finish, then pipette supernatant from Midi plate to new Pooling plate\n=============================================================================="));
    MECC::TraceComment(Translate("**** 5 minute timer for magnet ****"));
    if( 0 == magnet_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (is_pipetting == "true")
    {
      MECC::TraceComment(Translate("***************************************************************************\nPool Cleaned up PCR samples into 8 wells of Pooling_Plate\n***************************************************************************"));
      if (is_debugging == "true")
      {
        dialogHandle_14.SetOutput(Translate("Click 'OK' to continue."));
        dialogHandle_14.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
      pipette_volume = elution_vol + 5;
      HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
      if (pool_samples == 1)
      {
        TipPickupWithErrorHandling(ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
        empty_disp = "true";
        {
          loopCounter5 = 0;
          ML_STAR.Midi_on_magnet_4.SetCurrentPosition(1);
          Pooling_to.SetCurrentPosition(1);
          while (
             (ML_STAR.Midi_on_magnet_4.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, ML_STAR.Midi_on_magnet_4, 1, Pooling_to, 1);
            loopCounter5 = loopCounter5 + 1;
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            if (empty_disp == "true")
            {
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
            else
            {
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
            empty_disp = "false";
            if (
               (ML_STAR.Midi_on_magnet_4.GetCurrentPosition() > 0 && ML_STAR.Midi_on_magnet_4.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          ML_STAR.Midi_on_magnet_4.SetMax(ML_STAR.Midi_on_magnet_4.GetTotal());
          Pooling_to.SetMax(Pooling_to.GetTotal());
          ML_STAR.Midi_on_magnet_4.SetCurrentPosition(1);
          Pooling_to.SetCurrentPosition(1);
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
      else
      {
        {
          loopCounter5 = 0;
          ML_STAR.Midi_on_magnet_4.SetCurrentPosition(1);
          No_pooling_to.SetCurrentPosition(1);
          while (
             (ML_STAR.Midi_on_magnet_4.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, ML_STAR.Midi_on_magnet_4, 1, No_pooling_to, 1);
            loopCounter5 = loopCounter5 + 1;
            TipPickupWithErrorHandling(ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            if (
               (ML_STAR.Midi_on_magnet_4.GetCurrentPosition() > 0 && ML_STAR.Midi_on_magnet_4.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          ML_STAR.Midi_on_magnet_4.SetMax(ML_STAR.Midi_on_magnet_4.GetTotal());
          No_pooling_to.SetMax(No_pooling_to.GetTotal());
          ML_STAR.Midi_on_magnet_4.SetCurrentPosition(1);
          No_pooling_to.SetCurrentPosition(1);
        }
      }
      HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    }
    MECC::TraceComment(Translate("**** Move Mid plate to waste"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_magnet, ML_STAR.MIDI_Waste, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("***************************************************************************\nReplace lid on Pooling_Plate\n***************************************************************************"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Pooling_Plate_Lid_Parking, ML_STAR.Pooling_Plate_lid, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("*** PCR plate to waste"));
    if (use_ODTC == 1)
    {
      ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlate(ML_STAR.PCR_Plate_move, ML_STAR.PCR_Plate_waste, 1, 1, ML_STAR);
    }
    CleanUp();
    ISWAP_PLATEANDLIDMOVEMENT::_ExitLibrary();
    NIST_DEVICE_CONTROLLERS::_ExitLibrary();
    NIST_TRUSEQNANO_PREP::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
  } }
