 namespace _Method { #include "Common\\iSWAP-PlateAndLidMovement.hs_" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_Device_Controllers.hs_" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_TruSeqNano_Prep.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
#include "Post-Selection PCR and clean-up.24 samples.res"
variable bln_Global_SimulatorMode;
variable str_Global_ODTCIPAddress;
variable ODTC;
variable odtc_script_path;
variable odtc_script_time;
variable odtc_script_id;
variable var_Global_HHSNode3;
variable HHS3;
variable SetTempHHS3;
variable pipette_volume;
variable loopCounter3;
variable primer_mix_volume;
variable loopCounter5;
variable loopCounter1;
variable loopCounter2;
variable loopCounter6;
variable is_debugging;
dialog dialogHandle_1;
dialog dialogHandle_2;
dialog dialogHandle_3;
dialog dialogHandle_4;
dialog dialogHandle_5;
dialog dialogHandle_6;
dialog dialogHandle_7;
dialog dialogHandle_8;
dialog dialogHandle_9;
dialog dialogHandle_10;
dialog dialogHandle_11;
dialog dialogHandle_12;
dialog dialogHandle_13;
dialog dialogHandle_14;
global device ML_STAR ("Post-Selection PCR and clean-up.24 samples.lay", "ML_STAR", hslTrue);
global device HxFan ("Post-Selection PCR and clean-up.24 samples.lay", "HxFan", hslTrue);
sequence Sample_Plate_arr[];
sequence Sample_Plate;
sequence Rev_Primer_arr[];
sequence Rev_Primer;
dialog dialogHandle_15;
dialog dialogHandle_16;
variable sample_volume;
variable bead_ratio;
variable bead_volume;
variable pcr_time;
variable pipetting_time;
variable wait_time;
timer timer1;
variable mix_volume;
variable empty_disp;
timer magnet_timer;
timer timer2;
timer timer3;
variable time_point;
dialog dialogHandle_17;
dialog dialogHandle_18;
dialog dialogHandle_19;
dialog dialogHandle_20;
dialog dialogHandle_21;
dialog dialogHandle_22;
dialog dialogHandle_23;
dialog dialogHandle_24;
variable elution_vol;
variable bln_Global_SkipAllTimers;
variable timer_2_min;
variable timer_5_min;
variable timer_3_min;
sequence Pooling_arr[];
sequence Pooling_to;
variable user_choice;
variable loopCounter4;
dialog customDialog_25;
dialog customDialog_26;
dialog customDialog_27;
dialog customDialog_28;
dialog customDialog_29;
dialog customDialog_30;
dialog customDialog_31;
dialog dialogHandle_32;
variable Bead_stock_volume;
variable Beads_used;
dialog dialogHandle_33;
variable sample_mix_volume;
variable timer_10_sec;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ISWAP_PLATEANDLIDMOVEMENT::_InitLibrary();
    NIST_DEVICE_CONTROLLERS::_InitLibrary();
    NIST_TRUSEQNANO_PREP::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    bln_Global_SimulatorMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    is_debugging = "false";
    bln_Global_SkipAllTimers = 0;
    if (bln_Global_SimulatorMode == 1)
    {
      bln_Global_SkipAllTimers = 1;
    }
    if (bln_Global_SkipAllTimers == 1)
    {
      timer_2_min = 1;
      timer_3_min = 1;
      timer_5_min = 1;
      timer_10_sec = 1;
    }
    else
    {
      timer_2_min = 120;
      timer_3_min = 180;
      timer_5_min = 300;
      timer_10_sec = 10;
    }
    GetParams();
    Bead_stock_volume = 35000;
    Beads_used = time_point - 1;
    Beads_used = Beads_used * 4666;
    Beads_used = Beads_used * 1.6;
    Bead_stock_volume = Bead_stock_volume - Beads_used;
    Trace ("Bead stock remaining:  ", Bead_stock_volume);
    StartUp();
    Sample_Plate_arr.SetSize(0);
    Sample_Plate_arr.AddAsLast(ML_STAR.Sample_Plate_1);
    Sample_Plate_arr.AddAsLast(ML_STAR.Sample_Plate_2);
    Sample_Plate_arr.AddAsLast(ML_STAR.Sample_Plate_3);
    Sample_Plate_arr.AddAsLast(ML_STAR.Sample_Plate_4);
    Sample_Plate=Sample_Plate_arr.GetAt(time_point-1);
    Rev_Primer_arr.SetSize(0);
    Rev_Primer_arr.AddAsLast(ML_STAR.Rev_Primers_1);
    Rev_Primer_arr.AddAsLast(ML_STAR.Rev_Primers_2);
    Rev_Primer_arr.AddAsLast(ML_STAR.Rev_Primers_3);
    Rev_Primer_arr.AddAsLast(ML_STAR.Rev_Primers_4);
    Rev_Primer=Rev_Primer_arr.GetAt(time_point-1);
    Pooling_arr.SetSize(0);
    Pooling_arr.AddAsLast(ML_STAR.Pooling_Plate_1);
    Pooling_arr.AddAsLast(ML_STAR.Pooling_Plate_2);
    Pooling_arr.AddAsLast(ML_STAR.Pooling_Plate_3);
    Pooling_arr.AddAsLast(ML_STAR.Pooling_Plate_4);
    Pooling_to=Pooling_arr.GetAt(time_point-1);
    if (bln_Global_SkipAllTimers == 0)
    {
      user_choice = 1;
      customDialog_31.InitCustomDialog("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");
      customDialog_31.ShowCustomDialog();
      user_choice = customDialog_31.GetCustomDialogProperty( "ReturnValue" );
      if (user_choice == 2)
      {
        abort;
      }
    }
    MECC::TraceComment(Translate("=======================================================\nRestriction Digest Step\n======================================================="));
    MECC::TraceComment(Translate("***************************************************************************\nPre-heat ODTC for restriction digest\n***************************************************************************"));
    if (bln_Global_SimulatorMode == 0)
    {
      NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
      odtc_script_path = "C:\\Program Files (x86)\\HAMILTON\\Methods\\GSF-IMS Project\\E. coli Methods\\Post-Selection PCR Prep\\Restriction_Initialization.xml";
      NIST_DEVICE_CONTROLLERS::StartScriptODTC(ODTC, odtc_script_path, odtc_script_time, odtc_script_id);
    }
    MECC::TraceComment(Translate("***************************************************************************\nRemove lids from PCR_Plate and Sample_Plate\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_1.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_1.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Sample_Plate_lid, ML_STAR.Sample_Plate_Lid_Parking, 0, 1, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_Lid_Parking, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("***************************************************************************\nTransfer DNA template from Sample Plate to PCR plate\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_2.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_2.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    pipette_volume = 40;
    mix_volume = 30;
    {
      loopCounter3 = 0;
      while (
         (Sample_Plate.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, Sample_Plate, 1, ML_STAR.PCR_Plate_1, 1);
        loopCounter3 = loopCounter3 + 1;
        TipPickupWithErrorHandling(ML_STAR.MlStar50ulTipWithFilter);
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (Sample_Plate.GetCurrentPosition() > 0 && Sample_Plate.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      Sample_Plate.SetMax(Sample_Plate.GetTotal());
      ML_STAR.PCR_Plate_1.SetMax(ML_STAR.PCR_Plate_1.GetTotal());
      Sample_Plate.SetCurrentPosition(1);
      ML_STAR.PCR_Plate_1.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("***************************************************************************\nAdd Enzyme to PCR plate\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_3.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_3.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    pipette_volume = 5;
    mix_volume = 30;
    {
      loopCounter1 = 0;
      ML_STAR.PCR_Plate_1.SetCurrentPosition(1);
      while (
         (ML_STAR.PCR_Plate_1.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.PCR_Plate_1, 1);
        loopCounter1 = loopCounter1 + 1;
        TipPickupWithErrorHandling(ML_STAR.MlStar50ulTipWithFilter);
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.PCR_Plate_1.GetCurrentPosition() > 0 && ML_STAR.PCR_Plate_1.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.PCR_Plate_1.SetMax(ML_STAR.PCR_Plate_1.GetTotal());
      ML_STAR.PCR_Plate_1.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("***************************************************************************\nReplace lids on PCR_Plate and Sample_Plate\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_4.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_4.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_Lid_Parking, ML_STAR.PCR_Plate_lid, 0, 1, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Sample_Plate_Lid_Parking, ML_STAR.Sample_Plate_lid, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("***************************************************************************\nWait for ODTC lid pre-heating method, \nthen open ODTC, move PCR plate to ODTC, close ODTC and run restriction incubation method\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_5.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_5.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if (bln_Global_SimulatorMode == 0)
    {
      NIST_DEVICE_CONTROLLERS::WaitForScriptODTC(ODTC, odtc_script_time, odtc_script_id);
      NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlateWithLid(ML_STAR.PCR_Plate_move, ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_ODTC_move, ML_STAR.PCR_Plate_ODTC_lid, 0, 0, ML_STAR);
    if (bln_Global_SimulatorMode == 0)
    {
      NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
      odtc_script_path = "C:\\Program Files (x86)\\HAMILTON\\Methods\\GSF-IMS Project\\E. coli Methods\\Post-Selection PCR Prep\\Restriction_Incubation.xml";
      NIST_DEVICE_CONTROLLERS::StartScriptODTC(ODTC, odtc_script_path, odtc_script_time, odtc_script_id);
    }
    if(0){
      if (primer_mix_volume > 0)
      {
        MECC::TraceComment(Translate("***************************************************************************\nDuring restriction incubation, take lid off of Primer plate and mix primers\n***************************************************************************"));
        if (is_debugging == "true")
        {
          dialogHandle_6.SetOutput(Translate("Click 'OK' to continue."));
          dialogHandle_6.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        }
        ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.Primer_Plate_lid, ML_STAR.Primer_Plate_Lid_Parking, 1, 1, ML_STAR);
        HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
        {
          loopCounter2 = 0;
          while (
             (ML_STAR.Primer_mix_from_1.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, ML_STAR.Primer_mix_from_1, 1, ML_STAR.Primer_mix_to_1, 1);
            loopCounter2 = loopCounter2 + 1;
            TipPickupWithErrorHandling(ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            if (
               (ML_STAR.Primer_mix_from_1.GetCurrentPosition() > 0 && ML_STAR.Primer_mix_from_1.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          ML_STAR.Primer_mix_from_1.SetMax(ML_STAR.Primer_mix_from_1.GetTotal());
          ML_STAR.Primer_mix_to_1.SetMax(ML_STAR.Primer_mix_to_1.GetTotal());
          ML_STAR.Primer_mix_from_1.SetCurrentPosition(1);
          ML_STAR.Primer_mix_to_1.SetCurrentPosition(1);
        }
        {
          loopCounter2 = 0;
          while (
             (ML_STAR.Primer_mix_from_2.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, ML_STAR.Primer_mix_from_2, 1, ML_STAR.Primer_mix_to_2, 1);
            loopCounter2 = loopCounter2 + 1;
            TipPickupWithErrorHandling(ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            if (
               (ML_STAR.Primer_mix_from_2.GetCurrentPosition() > 0 && ML_STAR.Primer_mix_from_2.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          ML_STAR.Primer_mix_from_2.SetMax(ML_STAR.Primer_mix_from_2.GetTotal());
          ML_STAR.Primer_mix_to_2.SetMax(ML_STAR.Primer_mix_to_2.GetTotal());
          ML_STAR.Primer_mix_from_2.SetCurrentPosition(1);
          ML_STAR.Primer_mix_to_2.SetCurrentPosition(1);
        }
        HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
        ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.Primer_Plate_Lid_Parking, ML_STAR.Primer_Plate_lid, 0, 1, ML_STAR);
      }
    }
    MECC::TraceComment(Translate("***************************************************************************\nWait for ODTC incubation to finish, then move PCR plate from ODTC\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_7.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_7.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if (bln_Global_SimulatorMode == 0)
    {
      NIST_DEVICE_CONTROLLERS::WaitForScriptODTC(ODTC, odtc_script_time, odtc_script_id);
      NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlateWithLid(ML_STAR.PCR_Plate_ODTC_move, ML_STAR.PCR_Plate_ODTC_lid, ML_STAR.PCR_Plate_move, ML_STAR.PCR_Plate_lid, 0, 0, ML_STAR);
    MECC::TraceComment(Translate("=======================================================\nFirst PCR Step\n======================================================="));
    MECC::TraceComment(Translate("***************************************************************************\nClose ODTC, and run PCR pre-heat method on ODTC\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_8.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_8.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if (bln_Global_SimulatorMode == 0)
    {
      NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
      odtc_script_path = "C:\\Program Files (x86)\\HAMILTON\\Methods\\GSF-IMS Project\\E. coli Methods\\Post-Selection PCR Prep\\PCR_Initialization.xml";
      NIST_DEVICE_CONTROLLERS::StartScriptODTC(ODTC, odtc_script_path, odtc_script_time, odtc_script_id);
    }
    MECC::TraceComment(Translate("***************************************************************************\nRemove lids from PCR_Plate and Primer_Plate\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_9.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_9.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_Lid_Parking, 0, 1, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.Primer_Plate_lid, ML_STAR.Primer_Plate_Lid_Parking, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("***************************************************************************\nAdd Primers to PCR plate\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_10.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_10.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    pipette_volume = 2.5;
    {
      loopCounter6 = 0;
      ML_STAR.PCR_Plate_1.SetCurrentPosition(1);
      while (
         (ML_STAR.PCR_Plate_1.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.PCR_Plate_1, 1);
        loopCounter6 = loopCounter6 + 1;
        TipPickupWithErrorHandling(ML_STAR.MlStar50ulTipWithFilter);
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.PCR_Plate_1.GetCurrentPosition() > 0 && ML_STAR.PCR_Plate_1.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.PCR_Plate_1.SetMax(ML_STAR.PCR_Plate_1.GetTotal());
      ML_STAR.PCR_Plate_1.SetCurrentPosition(1);
    }
    {
      loopCounter6 = 0;
      ML_STAR.PCR_Plate_1.SetCurrentPosition(1);
      while (
         (ML_STAR.PCR_Plate_1.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, Rev_Primer, 1, ML_STAR.PCR_Plate_1, 1);
        loopCounter6 = loopCounter6 + 1;
        TipPickupWithErrorHandling(ML_STAR.MlStar50ulTipWithFilter);
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.PCR_Plate_1.GetCurrentPosition() > 0 && ML_STAR.PCR_Plate_1.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      Rev_Primer.SetMax(Rev_Primer.GetTotal());
      ML_STAR.PCR_Plate_1.SetMax(ML_STAR.PCR_Plate_1.GetTotal());
      Rev_Primer.SetCurrentPosition(1);
      ML_STAR.PCR_Plate_1.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("***************************************************************************\nReplace lid on Primer_Plate\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_14.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_14.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.Primer_Plate_Lid_Parking, ML_STAR.Primer_Plate_lid, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("***************************************************************************\nAdd PCR Master Mix to PCR plate\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_11.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_11.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    pipette_volume = 50;
    mix_volume = 90;
    {
      loopCounter6 = 0;
      ML_STAR.PCR_Plate_1.SetCurrentPosition(1);
      while (
         (ML_STAR.PCR_Plate_1.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.PCR_Plate_1, 1);
        loopCounter6 = loopCounter6 + 1;
        TipPickupWithErrorHandling(ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.PCR_Plate_1.GetCurrentPosition() > 0 && ML_STAR.PCR_Plate_1.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.PCR_Plate_1.SetMax(ML_STAR.PCR_Plate_1.GetTotal());
      ML_STAR.PCR_Plate_1.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("***************************************************************************\nReplace lid on PCR_Plate\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_12.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_12.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_Lid_Parking, ML_STAR.PCR_Plate_lid, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("***************************************************************************\nWait for ODTC lid pre-heating method, \nthen open ODTC, move PCR plate to ODTC, close ODTC and run step 1 PCR method\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_13.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_13.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if (bln_Global_SimulatorMode == 0)
    {
      NIST_DEVICE_CONTROLLERS::WaitForScriptODTC(ODTC, odtc_script_time, odtc_script_id);
      NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlateWithLid(ML_STAR.PCR_Plate_move, ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_ODTC_move, ML_STAR.PCR_Plate_ODTC_lid, 0, 0, ML_STAR);
    if (bln_Global_SimulatorMode == 0)
    {
      NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
      odtc_script_path = "C:\\Program Files (x86)\\HAMILTON\\Methods\\GSF-IMS Project\\E. coli Methods\\Post-Selection PCR Prep\\PCR_Step_1.xml";
      NIST_DEVICE_CONTROLLERS::StartScriptODTC(ODTC, odtc_script_path, odtc_script_time, odtc_script_id);
    }
    pcr_time = 646;
    pipetting_time = 300;
    wait_time = pcr_time - pipetting_time;
    if (bln_Global_SkipAllTimers == 1)
    {
      wait_time = 1;
    }
    if( 0 == timer1.SetTimer(wait_time) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (bln_Global_SkipAllTimers == 0)
    {
      user_choice = 1;
      customDialog_25.InitCustomDialog("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");
      customDialog_25.ShowCustomDialog();
      user_choice = customDialog_25.GetCustomDialogProperty( "ReturnValue" );
      if (user_choice == 2)
      {
        abort;
      }
    }
    MECC::TraceComment(Translate("***************************************************************************\nFirst PCR clean-up;\nAdd beads to Midi plate\nFinish PCR; Remove lid from PCR_Plate;\nbind plasmid DNA to the beads and keep the supernatant\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_15.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_15.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    sample_volume = 90;
    bead_ratio = 0.6;
    bead_volume = bead_ratio * sample_volume;
    sample_mix_volume = sample_volume + bead_volume;
    sample_mix_volume = sample_mix_volume * 0.75;
    if (sample_mix_volume > 300)
    {
      sample_mix_volume = 300;
    }
    MECC::TraceComment(Translate("**** timer waiting for first PCR ****"));
    if( 0 == timer1.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    Add_AmpureSingle(ML_STAR.Bead_Stock, ML_STAR.Midi_on_HHS_1, bead_volume, 0, 0);
    MECC::TraceComment(Translate("***************************************************************************\nWait for PCR method to finish, then move PCR plate from ODTC, and take lid off of PCR plate\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_16.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_16.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if (bln_Global_SimulatorMode == 0)
    {
      NIST_DEVICE_CONTROLLERS::WaitForScriptODTC(ODTC, odtc_script_time, odtc_script_id);
      NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlateWithLid(ML_STAR.PCR_Plate_ODTC_move, ML_STAR.PCR_Plate_ODTC_lid, ML_STAR.PCR_Plate_move, ML_STAR.PCR_Plate_lid, 0, 0, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_Lid_Parking, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("***************************************************************************\nClose ODTC, and run PCR pre-heat method on ODTC\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_17.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_17.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if (bln_Global_SimulatorMode == 0)
    {
      NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
      odtc_script_path = "C:\\Program Files (x86)\\HAMILTON\\Methods\\GSF-IMS Project\\E. coli Methods\\Post-Selection PCR Prep\\PCR_Initialization.xml";
      NIST_DEVICE_CONTROLLERS::StartScriptODTC(ODTC, odtc_script_path, odtc_script_time, odtc_script_id);
    }
    MECC::TraceComment(Translate("=================================================\nShake Midi plate for ten seconds to resuspend beads;\nTransfer samples from PCR plate to Midi plate; \nMix by pipetting 10x;\nand incubate two additional minutes without shaking\n================================================="));
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
      HSLHamHeaterShaker::StartShaker(HHS3, 1800);
    }
    MECC::TraceComment(Translate("***** Now shaking at RT for 10s ......."));
    if( 0 == timer3.SetTimer(timer_10_sec) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 10 sec shaking timer ****"));
    if( 0 == timer3.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::StopShaker(HHS3);
    }
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
    {
      loopCounter4 = 0;
      ML_STAR.Midi_on_HHS_1.SetCurrentPosition(1);
      ML_STAR.PCR_Plate_1.SetCurrentPosition(1);
      while (
         (ML_STAR.Midi_on_HHS_1.GetCurrentPosition() > 0)
      && (ML_STAR.PCR_Plate_1.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Midi_on_HHS_1, 1, ML_STAR.PCR_Plate_1, 1);
        loopCounter4 = loopCounter4 + 1;
        TipPickupWithErrorHandling(ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.Midi_on_HHS_1.GetCurrentPosition() > 0 && ML_STAR.Midi_on_HHS_1.GetMax() == 0 )
        && (ML_STAR.PCR_Plate_1.GetCurrentPosition() > 0 && ML_STAR.PCR_Plate_1.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Midi_on_HHS_1.SetMax(ML_STAR.Midi_on_HHS_1.GetTotal());
      ML_STAR.PCR_Plate_1.SetMax(ML_STAR.PCR_Plate_1.GetTotal());
      ML_STAR.Midi_on_HHS_1.SetCurrentPosition(1);
      ML_STAR.PCR_Plate_1.SetCurrentPosition(1);
    }
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    MECC::TraceComment(Translate("***** Now incubating at RT for 2 min ......."));
    if( 0 == timer2.SetTimer(timer_2_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 2 minute timer for RT incubation ****"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_Lid_Parking, ML_STAR.PCR_Plate_lid, 1, 1, ML_STAR);
    if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    MECC::TraceComment(Translate("***** Incubation finished..."));
    MECC::TraceComment(Translate("=======================================================\nMove Midi plate to magnet, incubate 5 minutes,\nthen transfer supernatant to columns 4-6 in Midi plate;\nincubate 5 more minutes; then transfer supernatant to columns 7-9 in Midi plate\nmove Midi plate to HHS\n======================================================="));
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("**** on magnet..."));
    if( 0 == magnet_timer.SetTimer(timer_5_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 5 minute timer for magnet ****"));
    if( 0 == magnet_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** done."));
    pipette_volume = sample_volume + bead_volume;
    {
      loopCounter4 = 0;
      ML_STAR.Midi_on_magnet_1.SetCurrentPosition(1);
      ML_STAR.Midi_on_magnet_2.SetCurrentPosition(1);
      while (
         (ML_STAR.Midi_on_magnet_1.GetCurrentPosition() > 0)
      && (ML_STAR.Midi_on_magnet_2.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Midi_on_magnet_1, 1, ML_STAR.Midi_on_magnet_2, 1);
        loopCounter4 = loopCounter4 + 1;
        TipPickupWithErrorHandling(ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.Midi_on_magnet_1.GetCurrentPosition() > 0 && ML_STAR.Midi_on_magnet_1.GetMax() == 0 )
        && (ML_STAR.Midi_on_magnet_2.GetCurrentPosition() > 0 && ML_STAR.Midi_on_magnet_2.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Midi_on_magnet_1.SetMax(ML_STAR.Midi_on_magnet_1.GetTotal());
      ML_STAR.Midi_on_magnet_2.SetMax(ML_STAR.Midi_on_magnet_2.GetTotal());
      ML_STAR.Midi_on_magnet_1.SetCurrentPosition(1);
      ML_STAR.Midi_on_magnet_2.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("**** 5 minute timer for magnet ****"));
    if( 0 == magnet_timer.SetTimer(timer_5_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == magnet_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** Second supernatant transfer to make sure all beads are stuck to magnet"));
    pipette_volume = pipette_volume - 10;
    {
      loopCounter4 = 0;
      ML_STAR.Midi_on_magnet_2.SetCurrentPosition(1);
      ML_STAR.Midi_on_magnet_3.SetCurrentPosition(1);
      while (
         (ML_STAR.Midi_on_magnet_2.GetCurrentPosition() > 0)
      && (ML_STAR.Midi_on_magnet_3.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Midi_on_magnet_2, 1, ML_STAR.Midi_on_magnet_3, 1);
        loopCounter4 = loopCounter4 + 1;
        TipPickupWithErrorHandling(ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.Midi_on_magnet_2.GetCurrentPosition() > 0 && ML_STAR.Midi_on_magnet_2.GetMax() == 0 )
        && (ML_STAR.Midi_on_magnet_3.GetCurrentPosition() > 0 && ML_STAR.Midi_on_magnet_3.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Midi_on_magnet_2.SetMax(ML_STAR.Midi_on_magnet_2.GetTotal());
      ML_STAR.Midi_on_magnet_3.SetMax(ML_STAR.Midi_on_magnet_3.GetTotal());
      ML_STAR.Midi_on_magnet_2.SetCurrentPosition(1);
      ML_STAR.Midi_on_magnet_3.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("**** Move plate to HHS"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_magnet, ML_STAR.Midi_on_HHS, 1, 1, ML_STAR);
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
    }
    MECC::TraceComment(Translate("=====================================================================\nNext step: bind PCR product to beads and discard the supernatant\n====================================================================="));
    bead_ratio = 0.6;
    bead_volume = bead_ratio * pipette_volume;
    sample_mix_volume = pipette_volume + bead_volume;
    sample_mix_volume = sample_mix_volume * 0.9;
    if (sample_mix_volume > 300)
    {
      sample_mix_volume = 300;
    }
    Add_AmpureSingle(ML_STAR.Bead_Stock, ML_STAR.Midi_on_HHS_3, bead_volume, 1, sample_mix_volume);
    MECC::TraceComment(Translate("***** Now incubating at RT for 2min ......."));
    if( 0 == timer2.SetTimer(timer_2_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 2 minute timer for RT incubation ****"));
    if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("***** Incubation finished..."));
    MECC::TraceComment(Translate("=======================================================\nMove Midi plate to magnet, incubate 3 minutes,\nthen discard the supernatant\n======================================================="));
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("**** on magnet..."));
    if( 0 == magnet_timer.SetTimer(timer_3_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 3 minute timer for magnet ****"));
    if( 0 == magnet_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** done."));
    pipette_volume = pipette_volume + bead_volume;
    pipette_volume = pipette_volume + 10;
    Transfer_PlatetoWaste(ML_STAR.Midi_on_magnet_3, pipette_volume, Translate("Nano_SVF_EthanolWaste_JetEmpty_HigherAirTransport"));
    MECC::TraceComment(Translate("===============================================================================\nEthanol rinse (2x), then resuspend sample in elution buffer, put plate on magnet, and wait 5 minutes\n==============================================================================="));
    EthanolStep(ML_STAR.Midi_on_magnet_3, ML_STAR.Ethanol_85, 35, ML_STAR.DI_Water, ML_STAR.Midi_on_HHS_3);
    MECC::TraceComment(Translate("==================================================================================================================================\nMove to Magnet\n=================================================================================================================================="));
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 1, 1, ML_STAR);
    if( 0 == magnet_timer.SetTimer(timer_5_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (bln_Global_SkipAllTimers == 0)
    {
      user_choice = 1;
      customDialog_27.InitCustomDialog("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");
      customDialog_27.ShowCustomDialog();
      user_choice = customDialog_27.GetCustomDialogProperty( "ReturnValue" );
      if (user_choice == 2)
      {
        abort;
      }
      customDialog_26.InitCustomDialog("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");
      customDialog_26.ShowCustomDialog();
      user_choice = customDialog_26.GetCustomDialogProperty( "ReturnValue" );
      if (user_choice == 2)
      {
        abort;
      }
    }
    MECC::TraceComment(Translate("***************************************************************************\nRemove lid from PCR_Plate and prep plate for Second PCR\n***************************************************************************"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_Lid_Parking, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("**** Prep PCR plate 2 ***"));
    if (is_debugging == "true")
    {
      dialogHandle_19.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_19.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    pipette_volume = 36;
    {
      loopCounter1 = 0;
      ML_STAR.PCR_Plate_2.SetCurrentPosition(1);
      while (
         (ML_STAR.PCR_Plate_2.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.PCR_Plate_2, 1);
        loopCounter1 = loopCounter1 + 1;
        TipPickupWithErrorHandling(ML_STAR.MlStar50ulTipWithFilter);
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.PCR_Plate_2.GetCurrentPosition() > 0 && ML_STAR.PCR_Plate_2.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.PCR_Plate_2.SetMax(ML_STAR.PCR_Plate_2.GetTotal());
      ML_STAR.PCR_Plate_2.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("==============================================================================\nWait for 5 minute magnet timer to finish, then pipette supernatant from Midi plate to new PCR plate\n=============================================================================="));
    MECC::TraceComment(Translate("**** 5 minute timer for magnet ****"));
    if( 0 == magnet_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    pipette_volume = 30;
    {
      loopCounter4 = 0;
      ML_STAR.Midi_on_magnet_3.SetCurrentPosition(1);
      ML_STAR.PCR_Plate_2.SetCurrentPosition(1);
      while (
         (ML_STAR.Midi_on_magnet_3.GetCurrentPosition() > 0)
      && (ML_STAR.PCR_Plate_2.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Midi_on_magnet_3, 1, ML_STAR.PCR_Plate_2, 1);
        loopCounter4 = loopCounter4 + 1;
        TipPickupWithErrorHandling(ML_STAR.MlStar50ulTipWithFilter);
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.Midi_on_magnet_3.GetCurrentPosition() > 0 && ML_STAR.Midi_on_magnet_3.GetMax() == 0 )
        && (ML_STAR.PCR_Plate_2.GetCurrentPosition() > 0 && ML_STAR.PCR_Plate_2.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Midi_on_magnet_3.SetMax(ML_STAR.Midi_on_magnet_3.GetTotal());
      ML_STAR.PCR_Plate_2.SetMax(ML_STAR.PCR_Plate_2.GetTotal());
      ML_STAR.Midi_on_magnet_3.SetCurrentPosition(1);
      ML_STAR.PCR_Plate_2.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("***************************************************************************\nReplace lid on PCR_Plate;\nmove Midi plate to HHS\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_32.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_32.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_Lid_Parking, ML_STAR.PCR_Plate_lid, 0, 1, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_magnet, ML_STAR.Midi_on_HHS, 1, 1, ML_STAR);
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
    }
    MECC::TraceComment(Translate("***************************************************************************\nWait for ODTC lid pre-heating method, \nthen open ODTC, move PCR plate to ODTC, close ODTC and run step 2 PCR method\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_18.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_18.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if (bln_Global_SimulatorMode == 0)
    {
      NIST_DEVICE_CONTROLLERS::WaitForScriptODTC(ODTC, odtc_script_time, odtc_script_id);
      NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlateWithLid(ML_STAR.PCR_Plate_move, ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_ODTC_move, ML_STAR.PCR_Plate_ODTC_lid, 0, 0, ML_STAR);
    if (bln_Global_SimulatorMode == 0)
    {
      NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
      odtc_script_path = "C:\\Program Files (x86)\\HAMILTON\\Methods\\GSF-IMS Project\\E. coli Methods\\Post-Selection PCR Prep\\PCR_Step_2.xml";
      NIST_DEVICE_CONTROLLERS::StartScriptODTC(ODTC, odtc_script_path, odtc_script_time, odtc_script_id);
    }
    pcr_time = 1504;
    pipetting_time = 300;
    wait_time = pcr_time - pipetting_time;
    if (bln_Global_SkipAllTimers == 1)
    {
      wait_time = 1;
    }
    if( 0 == timer1.SetTimer(wait_time) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (bln_Global_SkipAllTimers == 0)
    {
      user_choice = 1;
      customDialog_29.InitCustomDialog("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");
      customDialog_29.ShowCustomDialog();
      user_choice = customDialog_29.GetCustomDialogProperty( "ReturnValue" );
      if (user_choice == 2)
      {
        abort;
      }
      customDialog_28.InitCustomDialog("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");
      customDialog_28.ShowCustomDialog();
      user_choice = customDialog_28.GetCustomDialogProperty( "ReturnValue" );
      if (user_choice == 2)
      {
        abort;
      }
    }
    MECC::TraceComment(Translate("***************************************************************************\nSecond PCR clean-up;\nMove Midi to HHS;\nAdd beads to Midi plate\nFinish PCR; Remove lid from PCR_Plate;\nbind PCR product to the beads and discard the supernatant\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_22.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_22.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    sample_volume = 60;
    bead_ratio = 1.0;
    bead_volume = bead_ratio * sample_volume;
    sample_mix_volume = sample_volume + bead_volume;
    sample_mix_volume = sample_mix_volume * 0.75;
    if (sample_mix_volume > 300)
    {
      sample_mix_volume = 300;
    }
    MECC::TraceComment(Translate("**** timer waiting for second PCR ****"));
    if( 0 == timer1.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    Add_AmpureSingle(ML_STAR.Bead_Stock, ML_STAR.Midi_on_HHS_4, bead_volume, 0, 0);
    MECC::TraceComment(Translate("***************************************************************************\nWait for PCR method to finish, then move PCR plate from ODTC, and take lid off of PCR plate\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_21.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_21.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if (bln_Global_SimulatorMode == 0)
    {
      NIST_DEVICE_CONTROLLERS::WaitForScriptODTC(ODTC, odtc_script_time, odtc_script_id);
      NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlateWithLid(ML_STAR.PCR_Plate_ODTC_move, ML_STAR.PCR_Plate_ODTC_lid, ML_STAR.PCR_Plate_move, ML_STAR.PCR_Plate_lid, 0, 0, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_Lid_Parking, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("***************************************************************************\nClose ODTC\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_20.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_20.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if (bln_Global_SimulatorMode == 0)
    {
      NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
    }
    MECC::TraceComment(Translate("=================================================\nShake midi plate for 10 seconds to resuspend beads;\nTransfer samples from PCR plate to Midi plate;\nMix by pipetting 10x;\nand incubate two additional minutes without shaking\n================================================="));
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
      HSLHamHeaterShaker::StartShaker(HHS3, 1800);
    }
    MECC::TraceComment(Translate("***** Now shaking at RT for 10s ......."));
    if( 0 == timer3.SetTimer(timer_10_sec) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 10 sec shaking timer ****"));
    if( 0 == timer3.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::StopShaker(HHS3);
    }
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
    {
      loopCounter4 = 0;
      ML_STAR.Midi_on_HHS_4.SetCurrentPosition(1);
      ML_STAR.PCR_Plate_2.SetCurrentPosition(1);
      while (
         (ML_STAR.Midi_on_HHS_4.GetCurrentPosition() > 0)
      && (ML_STAR.PCR_Plate_2.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Midi_on_HHS_4, 1, ML_STAR.PCR_Plate_2, 1);
        loopCounter4 = loopCounter4 + 1;
        TipPickupWithErrorHandling(ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.Midi_on_HHS_4.GetCurrentPosition() > 0 && ML_STAR.Midi_on_HHS_4.GetMax() == 0 )
        && (ML_STAR.PCR_Plate_2.GetCurrentPosition() > 0 && ML_STAR.PCR_Plate_2.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Midi_on_HHS_4.SetMax(ML_STAR.Midi_on_HHS_4.GetTotal());
      ML_STAR.PCR_Plate_2.SetMax(ML_STAR.PCR_Plate_2.GetTotal());
      ML_STAR.Midi_on_HHS_4.SetCurrentPosition(1);
      ML_STAR.PCR_Plate_2.SetCurrentPosition(1);
    }
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    MECC::TraceComment(Translate("***** Now incubating at RT for 2min ......."));
    if( 0 == timer2.SetTimer(timer_2_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 2 minute timer for RT incubation ****"));
    if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("***** Incubation finished..."));
    MECC::TraceComment(Translate("=======================================================\nMove Midi plate to magnet, incubate 3 minutes,\nthen discard supernatant;\n======================================================="));
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("**** on magnet..."));
    if( 0 == magnet_timer.SetTimer(timer_3_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 3 minute timer for magnet ****"));
    if( 0 == magnet_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** done."));
    pipette_volume = sample_volume + bead_volume;
    pipette_volume = pipette_volume + 10;
    Transfer_PlatetoWaste(ML_STAR.Midi_on_magnet_4, pipette_volume, Translate("Nano_SVF_EthanolWaste_JetEmpty_HigherAirTransport"));
    MECC::TraceComment(Translate("===============================================================================\nEthanol rinse (2x), then resuspend sample in elution buffer, put plate on magnet, and wait 5 minutes\n==============================================================================="));
    elution_vol = 50;
    EthanolStep(ML_STAR.Midi_on_magnet_4, ML_STAR.Ethanol_70, elution_vol, ML_STAR.Elution_Buffer, ML_STAR.Midi_on_HHS_4);
    MECC::TraceComment(Translate("***************************************************************************\nRemove lid from Pooling_Plate\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_33.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_33.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Pooling_Plate_lid, ML_STAR.Pooling_Plate_Lid_Parking, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("==================================================================================================================================\nMove to Magnet\n=================================================================================================================================="));
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 1, 1, ML_STAR);
    if( 0 == magnet_timer.SetTimer(timer_5_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (bln_Global_SkipAllTimers == 0)
    {
      user_choice = 1;
      customDialog_30.InitCustomDialog("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");
      customDialog_30.ShowCustomDialog();
      user_choice = customDialog_30.GetCustomDialogProperty( "ReturnValue" );
      if (user_choice == 2)
      {
        abort;
      }
    }
    MECC::TraceComment(Translate("==============================================================================\nWait for 5 minute magnet timer to finish, then pipette supernatant from Midi plate to new PCR plate\n=============================================================================="));
    MECC::TraceComment(Translate("**** 5 minute timer for magnet ****"));
    if( 0 == magnet_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("***************************************************************************\nPool Cleaned up PCR samples into 8 wells of Pooling_Plate\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_23.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_23.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    pipette_volume = elution_vol + 5;
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
    TipPickupWithErrorHandling(ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    empty_disp = "true";
    {
      loopCounter5 = 0;
      ML_STAR.Midi_on_magnet_4.SetCurrentPosition(1);
      Pooling_to.SetCurrentPosition(1);
      while (
         (ML_STAR.Midi_on_magnet_4.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Midi_on_magnet_4, 1, Pooling_to, 1);
        loopCounter5 = loopCounter5 + 1;
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        if (empty_disp == "true")
        {
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        else
        {
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        empty_disp = "false";
        if (
           (ML_STAR.Midi_on_magnet_4.GetCurrentPosition() > 0 && ML_STAR.Midi_on_magnet_4.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Midi_on_magnet_4.SetMax(ML_STAR.Midi_on_magnet_4.GetTotal());
      Pooling_to.SetMax(Pooling_to.GetTotal());
      ML_STAR.Midi_on_magnet_4.SetCurrentPosition(1);
      Pooling_to.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    MECC::TraceComment(Translate("**** Move plate to HHS"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_magnet, ML_STAR.Midi_on_HHS, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("***************************************************************************\nReplace lid on Pooling_Plate\n***************************************************************************"));
    if (is_debugging == "true")
    {
      dialogHandle_24.SetOutput(Translate("Click 'OK' to continue."));
      dialogHandle_24.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Pooling_Plate_Lid_Parking, ML_STAR.Pooling_Plate_lid, 1, 1, ML_STAR);
    CleanUp();
    ISWAP_PLATEANDLIDMOVEMENT::_ExitLibrary();
    NIST_DEVICE_CONTROLLERS::_ExitLibrary();
    NIST_TRUSEQNANO_PREP::_ExitLibrary();
  } }
