function Add_AmpureSingle( sequence & seq_AmpureBeads, sequence & seq_Destination, variable var_BeadVolumePerWell, variable var_LLD_On ) void ;
function Add_Ethanol( variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_LiquidClassEthanol ) void ;
function Add_RSB( sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse, variable var_VolPerSampleWell, variable var_TouchOff, variable var_RetractHeight ) void ;
private function CleanUp(  ) void ;
private function ErrorHandling_TipPickup( sequence & seq_TipsToUse ) void ;
private function EthanolStep( sequence & seq_PlateOnMagnet, sequence & seq_EthanolSource, variable var_ResuspensionVolume, sequence & var_ResuspensionBuffer ) void ;
private function GetParams(  ) void ;
private function Initialize_HHS( variable & var_Local_DeviceID, variable var_Local_Node ) void ;
function Remove_ResidualEtOH( sequence & seq_AspirationPosition ) void ;
function SetHHSTemperature( variable var_HHS_ID, variable var_Temperature ) void ;
private function StartUp(  ) void ;
function Transfer_PlateToPlate( sequence & seq_TipsToUse, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_VolumeToTransfer, variable var_LiquidClass, variable var_AspirationHeight, variable var_DispenseHeight ) void ;
function Transfer_PlatetoWaste( sequence & seq_AspirationPosition, variable var_VolumeToTransfer, variable var_LiquidClass ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function Initialize_HHS( variable & var_Local_DeviceID, variable var_Local_Node ) void {
  private dialog customDialog_1;
  private variable bln_Local_HHSInitReturn;
  private variable int_Global_ReturnDialog;
  private variable loopCounter20;
  var_Local_DeviceID = 0;
  MECC::TraceComment(Translate("==================================================================================================================================\nInitialize_HHS Start\n=================================================================================================================================="));
  Trace ("==================================================================================================================================");
  Trace ("Initializing HHS Located at Node:  ", var_Local_Node);
  Trace ("==================================================================================================================================");
  {
    loopCounter20 = 0;
    while (1 == 1)
    {
      loopCounter20 = loopCounter20 + 1;
      HSLHamHeaterShaker::SetSimulation(bln_Global_SimulatorMode);
      bln_Local_HHSInitReturn = HSLHamHeaterShaker::CreateUsbDevice(var_Local_Node, var_Local_DeviceID);
      if (bln_Local_HHSInitReturn != 0)
      {
        MECC::TraceComment(Translate("==================================================================================================================================\nFailed to Initialize HHS\n=================================================================================================================================="));
        HSLHamHeaterShaker::Terminate();
        customDialog_1.InitCustomDialog("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");
        customDialog_1.ShowCustomDialog();
        int_Global_ReturnDialog = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
        if (int_Global_ReturnDialog == 2)
        {
          MECC::TraceComment(Translate("==================================================================================================================================\nMethod Aborted\n=================================================================================================================================="));
          abort;
        }
      }
      else
      {
        break;
      }
    }
  }
  MECC::TraceComment(Translate("==================================================================================================================================\nInitialize_HHS Finish\n=================================================================================================================================="));
}

private function CleanUp(  ) void {
  MECC::TraceComment(Translate("***************************************************************************\nCleanUp() submethod\n***************************************************************************"));
  if (bln_Global_SimulatorMode == 0)
  {
    HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    NIST_DEVICE_CONTROLLERS::TerminateHHSs();
    NIST_DEVICE_CONTROLLERS::TerminateODTC(ODTC);
    if (time_point == 4)
    {
      NIST_DEVICE_CONTROLLERS::TerminateCPAC();
    }
    {
      	HxFan.SetFanSpeed("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"); // SetFanSpeed
    }
  }
  TipCount::Write2(ML_STAR.MlStar50ulTipWithFilter, "tip_counter_50", ML_STAR);
  TipCount::Write2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, "tip_counter_300", ML_STAR);
  TipCount::Write2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, "tip_counter_1000", ML_STAR);
}

private function StartUp(  ) void {
  private dialog customDialog_2;
  private dialog dialogHandle_3;
  private dialog customDialog_4;
  private variable SetTempCPAC;
  MECC::TraceComment(Translate("***************************************************************************\nStartUp() submethod\n***************************************************************************"));
  primer_mix_volume = 100;
  dialogHandle_3.SetInputSize(1);
  dialogHandle_3.SetInputField(0, Translate("Primer mixing volume?"), hslFloat, primer_mix_volume, 0, 200);
  dialogHandle_3.ShowInput(Translate("Select mixing volume for Primer Plate (or zero for no primer mixing)"), hslInfinite, hslOKOnly | hslDefButton1);
  primer_mix_volume = dialogHandle_3.GetInputField(0);
  user_choice = 1;
  customDialog_2.InitCustomDialog("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");
  customDialog_2.ShowCustomDialog();
  user_choice = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
  if (user_choice == 2)
  {
    abort;
  }
  if (bln_Global_SimulatorMode == 0)
  {
    {
      	HxFan.SetComPort("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"); // SetComPort
    }
    {
      	HxFan.SetFanSpeed("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"); // SetFanSpeed
    }
    {
      	HxFan.SetContinuousMode("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"); // SetContinuousMode
    }
  }
  TipCount::Edit2(ML_STAR.MlStar50ulTipWithFilter, "tip_counter_50", ML_STAR, 300);
  TipCount::Edit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, "tip_counter_300", ML_STAR, 300);
  TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, "tip_counter_1000", ML_STAR, 300);
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  if (bln_Global_SimulatorMode == 0)
  {
    str_Global_ODTCIPAddress = Translate("192.168.88.253");
    var_Global_HHSNode3 = 3;
    SetTempHHS3 = 20;
    Initialize_HHS(HHS3, var_Global_HHSNode3);
    NIST_TRUSEQNANO_PREP::SetHHSTemperature(HHS3, SetTempHHS3);
    HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
    NIST_DEVICE_CONTROLLERS::InitODTC(str_Global_ODTCIPAddress, ODTC);
    NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
    customDialog_4.InitCustomDialog("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");
    customDialog_4.ShowCustomDialog();
    user_choice = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
    if (user_choice == 2)
    {
      abort;
    }
    SetTempCPAC = 6;
    NIST_TRUSEQNANO_PREP::InitCPAC(bln_Global_SimulatorMode);
    NIST_TRUSEQNANO_PREP::SetCPACTemperature(SetTempCPAC);
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
}

private function GetParams(  ) void {
  private variable param_dict;
  private variable loc;
  private variable read_line;
  private file file1;
  private variable split_line[];
  private variable time_point_str;
  private variable key_exists;
  private variable param_file;
  private variable file_exists;
  private dialog customDialog_5;
  private dialog dialogHandle_6;
  private dialog customDialog_7;
  private dialog dialogHandle_8;
  param_dict = "param_dict";
  HSLExtensions::Dictionary::CreateDictionary(param_dict, 2);
  param_file = "C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv";
  file_exists = HSLExtensions::File::Exists(param_file);
  if (file_exists == 1)
  {
    file1.AddField(1, read_line, hslString);
    file1.SetDelimiter(hslAsciiText);
    if( 0 == file1.Open(param_file, hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, param_file, "HxMetEdCompCmd");
    }
    {
      loopCounter2 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter2 = loopCounter2 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        loc = StrFind(read_line, ",");
        if (loc > 0)
        {
          split_line = HSLExtensions::String::Split(read_line, Translate(","), 1);
          HSLExtensions::Dictionary::AddItem(param_dict, split_line.ElementAt( 1 -1), split_line.ElementAt( 2 -1));
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    key_exists = HSLExtensions::Dictionary::ExistsItem(param_dict, "timePoint");
    if (key_exists == 1)
    {
      time_point_str = HSLExtensions::Dictionary::GetItem(param_dict, "timePoint");
      time_point = StrFVal(time_point_str);
      if (time_point > 4)
      {
        customDialog_7.InitCustomDialog("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");
        customDialog_7.ShowCustomDialog();
        abort;
      }
      else
      {
        if (time_point < 1)
        {
          customDialog_5.InitCustomDialog("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");
          customDialog_5.ShowCustomDialog();
          abort;
        }
      }
    }
    else
    {
      dialogHandle_6.SetInputSize(1);
      dialogHandle_6.SetInputField(0, Translate("Time Point?"), hslInteger, 1, 1, 4);
      dialogHandle_6.ShowInput(Translate("Select time point (1-4):"), hslInfinite, hslOKOnly | hslDefButton1);
      time_point = dialogHandle_6.GetInputField(0);
    }
  }
  else
  {
    dialogHandle_8.SetInputSize(1);
    dialogHandle_8.SetInputField(0, Translate("Time Point?"), hslInteger, 1, 1, 4);
    dialogHandle_8.ShowInput(Translate("Select time point (1-4):"), hslInfinite, hslOKOnly | hslDefButton1);
    time_point = dialogHandle_8.GetInputField(0);
  }
}

private function EthanolStep( sequence & seq_PlateOnMagnet, sequence & seq_EthanolSource, variable var_ResuspensionVolume, sequence & var_ResuspensionBuffer ) void {
  private timer Incubate_RT_2min;
  private timer EvaporationTime;
  private timer Incubate_RT_3min;
  MECC::TraceComment(Translate("==================================================================================================================================\nEthanol Step\n=================================================================================================================================="));
  {
    for(loopCounter5 = 0; loopCounter5 < 2;)
    {
      loopCounter5 = loopCounter5 + 1;
      Add_Ethanol(24, seq_EthanolSource, seq_PlateOnMagnet, "Nano_HVF_80PercentEtOH_JetPart");
      MECC::TraceComment(Translate("==================================================================================================================================\nTransfer Alcohol Supernatant to Waste\n=================================================================================================================================="));
      Transfer_PlatetoWaste(seq_PlateOnMagnet, 200, "Nano_SVF_EthanolWaste_JetEmpty_HigherAirTransport");
    }
  }
  if( 0 == EvaporationTime.SetTimer(timer_5_min) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("==================================================================================================================================\nRemove Residual Ethanol\n=================================================================================================================================="));
  Remove_ResidualEtOH(seq_PlateOnMagnet);
  Trace ("***** Now waiting for ethanol evaporation .......");
  MECC::TraceComment(Translate("**** 5 minute timer for ethanol evaporation ****"));
  if( 0 == EvaporationTime.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("==================================================================================================================================\nPipetting Resuspension Buffer\n=================================================================================================================================="));
  if (var_ResuspensionVolume <= 50)
  {
    Add_RSB(var_ResuspensionBuffer, seq_PlateOnMagnet, ML_STAR.MlStar50ulTipWithFilter, var_ResuspensionVolume, 1, 6);
  }
  else
  {
    Add_RSB(var_ResuspensionBuffer, seq_PlateOnMagnet, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, var_ResuspensionVolume, 1, 6);
  }
  MECC::TraceComment(Translate("==================================================================================================================================\nMove to Shaker\n=================================================================================================================================="));
  ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_magnet, ML_STAR.Midi_on_HHS, 0, 1, ML_STAR);
  if (bln_Global_SimulatorMode == 0)
  {
    HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
    HSLHamHeaterShaker::StartShaker(HHS3, 1800);
  }
  if( 0 == Incubate_RT_2min.SetTimer(timer_2_min) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  Trace ("***** Now incubating at RT for 120s .......");
  MECC::TraceComment(Translate("**** 2 minute shaking timer ****"));
  if( 0 == Incubate_RT_2min.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if (bln_Global_SimulatorMode == 0)
  {
    HSLHamHeaterShaker::StopShaker(HHS3);
  }
  if( 0 == Incubate_RT_3min.SetTimer(timer_3_min) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("**** 3 minute timer ****"));
  if( 0 == Incubate_RT_3min.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("==================================================================================================================================\nEthanolStep Finish\n=================================================================================================================================="));
}

function Add_AmpureSingle( sequence & seq_AmpureBeads, sequence & seq_Destination, variable var_BeadVolumePerWell, variable var_LLD_On ) void {
  private variable MixVolume_Beads;
  private variable MixCycles_Beads;
  private variable LC_Beads;
  private variable FixedHt_Dispense;
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_AmpureSingle <<<<<<<<<<"));
  Trace ("Volume of Sample Purification Beads per well:  ", var_BeadVolumePerWell);
  if (var_LLD_On == 0)
  {
    MECC::TraceComment(Translate("*** cLLD off for the dispense ***"));
    FixedHt_Dispense = 0.2;
  }
  else
  {
    MECC::TraceComment(Translate("*** cLLD on for the dispense ***"));
    FixedHt_Dispense = 0;
  }
  MECC::TraceComment(Translate("********** Fill plate with AMPure XP Beads ..........."));
  MixVolume_Beads = Bead_stock_volume - 5000;
  MixVolume_Beads = MixVolume_Beads / (8 * 1.0);
  if (MixVolume_Beads > 1000)
  {
    MixVolume_Beads = 1000;
  }
  Trace ("MixVolume_Beads:  ", MixVolume_Beads);
  MixCycles_Beads = 10;
  onerror goto errLabel_9 ;
  err.Clear();
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  errLabel_9 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    ErrorHandling_TipPickup(ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  }   /* end if from skip handler if no error */
  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  {
    loopCounter2 = 0;
    while (
       (seq_Destination.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, seq_AmpureBeads, 1, seq_Destination, 1);
      loopCounter2 = loopCounter2 + 1;
      MixVolume_Beads = 300;
      MixCycles_Beads = 2;
      onerror goto errLabel_10 ;
      err.Clear();
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      errLabel_10 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        ErrorHandling_TipPickup(ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
      }   /* end if from skip handler if no error */
      LC_Beads = Translate("Nano_SVF_AmpureBeads_SurfaceEmpty_Subsequent");
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (seq_Destination.GetCurrentPosition() > 0 && seq_Destination.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    seq_AmpureBeads.SetMax(seq_AmpureBeads.GetTotal());
    seq_Destination.SetMax(seq_Destination.GetTotal());
    seq_AmpureBeads.SetCurrentPosition(1);
    seq_Destination.SetCurrentPosition(1);
  }
  Beads_used = var_BeadVolumePerWell * 24;
  Bead_stock_volume = Bead_stock_volume - Beads_used;
  Trace ("Bead stock remaining:  ", Bead_stock_volume);
  MECC::TraceComment(Translate("******** Create mapping files ********"));
  STCC::ResetFilterSequences();
  STCC::AddFilterSequence(ML_STAR, seq_AmpureBeads);
  {
    variable _FilterIdsArray_11[];
    variable _ColumnIdsArray_11[];
    variable _ColumnNamesArray_11[];
    variable _ExperimentsArray_11[];
    _FilterIdsArray_11.SetSize(1);
    _ColumnNamesArray_11.SetSize(10);
    _ColumnIdsArray_11.SetSize(10);
    _FilterIdsArray_11.SetAt(0, 10);
    _ColumnNamesArray_11.SetAt(0, "TRackBC");
    _ColumnIdsArray_11.SetAt(0, 1);
    _ColumnNamesArray_11.SetAt(1, "TLabwareId");
    _ColumnIdsArray_11.SetAt(1, 2);
    _ColumnNamesArray_11.SetAt(2, "TPositionId");
    _ColumnIdsArray_11.SetAt(2, 3);
    _ColumnNamesArray_11.SetAt(3, "TStatusSummary");
    _ColumnIdsArray_11.SetAt(3, 5);
    _ColumnNamesArray_11.SetAt(4, "TSumStateDescription");
    _ColumnIdsArray_11.SetAt(4, 6);
    _ColumnNamesArray_11.SetAt(5, "SRackBC");
    _ColumnIdsArray_11.SetAt(5, 8);
    _ColumnNamesArray_11.SetAt(6, "SLabwareId");
    _ColumnIdsArray_11.SetAt(6, 9);
    _ColumnNamesArray_11.SetAt(7, "SPositionId");
    _ColumnIdsArray_11.SetAt(7, 10);
    _ColumnNamesArray_11.SetAt(8, "SPositionBC");
    _ColumnIdsArray_11.SetAt(8, 11);
    _ColumnNamesArray_11.SetAt(9, "ActionDateTime");
    _ColumnIdsArray_11.SetAt(9, 12);
    _ExperimentsArray_11.SetSize(0);
    STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_Destination, 4, _FilterIdsArray_11, 0, _ColumnIdsArray_11, _ColumnNamesArray_11, _ExperimentsArray_11, "<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
  }
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_AmpureSingle <<<<<<<<<<"));
}

private function ErrorHandling_TipPickup( sequence & seq_TipsToUse ) void {
  private dialog dialogHandle_12;
  private dialog dialogHandle_13;
  private dialog customDialog_14;
  private dialog customDialog_15;
  private variable ret_AbortMethod;
  private variable var_DialogBoxString;
  private variable loopCounter_ChannelsNoTips;
  private variable ret_ReloadTips;
  private variable channelIndex;
  private variable flag_SkipToNextTipRack;
  private variable var_TipSequenceCurrentPosition;
  private variable var_NumberChannelsWithNoTips;
  private variable var_PickupPattern;
  private variable var_NoTipChannelString;
  private variable var_NumberTipsRemaining;
  private variable firmwareReturn;
  private variable var_Channel;
  private variable isTipPresent;
  private variable var_TipPickupPattern;
  private variable ret_RetryNextTipRack;
  private variable var_TipSequenceEndPosition;
  private variable Labware_ID;
  private variable Tip_Counter;
  private variable SimOn;
  private variable firmwareCommand;
  private variable arr_ChannelsNoTip[];
  MECC::TraceComment(Translate("START TIP PICKUP ERROR HANDLING"));
  SimOn = HSLML_STAR::IsSimulatorMode(ML_STAR);
  if (SimOn == 0)
  {
    var_PickupPattern = Translate("");
    arr_ChannelsNoTip.SetSize(0);
    {
      for(channelIndex = 0; channelIndex < 8;)
      {
        channelIndex = channelIndex + 1;
        firmwareCommand = StrConcat4(Translate("P"), channelIndex, Translate("RW"), Translate(""));
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          	firmwareReturn = arrRetValues[3];
        }
        isTipPresent = StrMid(firmwareReturn, 5, 1);
        if (isTipPresent == "1")
        {
          var_TipPickupPattern = Translate("0");
        }
        else
        {
          var_TipPickupPattern = Translate("1");
          arr_ChannelsNoTip.AddAsLast(channelIndex);
        }
        var_PickupPattern = var_PickupPattern + var_TipPickupPattern;
      }
    }
    var_NumberChannelsWithNoTips=arr_ChannelsNoTip.GetSize();
    var_NoTipChannelString = Translate("");
    {
      for(loopCounter_ChannelsNoTips = 0; loopCounter_ChannelsNoTips < var_NumberChannelsWithNoTips;)
      {
        loopCounter_ChannelsNoTips = loopCounter_ChannelsNoTips + 1;
        var_Channel=arr_ChannelsNoTip.GetAt(loopCounter_ChannelsNoTips-1);
        var_Channel = StrIStr(var_Channel);
        if (loopCounter_ChannelsNoTips != 1)
        {
          var_Channel = StrConcat2(Translate(", "), var_Channel);
        }
        var_NoTipChannelString = var_NoTipChannelString + var_Channel;
      }
    }
    var_TipSequenceCurrentPosition = seq_TipsToUse.GetCurrentPosition();
    var_TipSequenceEndPosition = seq_TipsToUse.GetCount();
    var_NumberTipsRemaining = var_TipSequenceEndPosition - var_TipSequenceCurrentPosition;
    var_NumberTipsRemaining = var_NumberTipsRemaining + 1;
    flag_SkipToNextTipRack = 1;
    if (var_NumberTipsRemaining <= 96)
    {
      flag_SkipToNextTipRack = 0;
    }
    var_DialogBoxString = StrConcat4(Translate("Channel(s) "), var_NoTipChannelString, Translate(" were not able to pick up the requested tip type."), Translate(""));
    customDialog_15.InitCustomDialog("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");
    customDialog_15.SetCustomDialogProperty( "radioButton2.IsEnabled", flag_SkipToNextTipRack );
    customDialog_15.ShowCustomDialog();
    ret_AbortMethod = customDialog_15.GetCustomDialogProperty( "ReturnValue" );
    ret_ReloadTips = customDialog_15.GetCustomDialogProperty( "radioButton1.IsChecked" );
    ret_RetryNextTipRack = customDialog_15.GetCustomDialogProperty( "radioButton2.IsChecked" );
    if (ret_AbortMethod == 2)
    {
      abort;
    }
    Labware_ID = SeqGetLabwareId(seq_TipsToUse);
    Labware_ID = StrLeft(Labware_ID, 3);
    if (Labware_ID == "TIP")
    {
      Tip_Counter = Translate("TruSeq_50F_Counter");
    }
    if (Labware_ID == "stf")
    {
      Tip_Counter = Translate("TruSeq_SVF_Counter");
    }
    if (Labware_ID == "HTF")
    {
      Tip_Counter = Translate("TruSeq_HVF_Counter");
    }
    if (ret_ReloadTips == 1)
    {
      PTL::ResetUnloadingStateAndSequences();
      PTL::SetUnloadingState("UserResponseTime", 0);
      PTL::SetUnloadingState("ErrorHandling", 3);
      PTL::SetUnloadingSize(1);
      PTL::SetUnloadingSequence(0, seq_TipsToUse, hslFalse, "");
      if( 0 == PTL::Unload(ML_STAR) )
      {
            PTL::RaiseRuntimeError(-1540095744, PTL::IDS::smartStepUnload, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
      PTL::GetUnloadingSequence(0, seq_TipsToUse);
      customDialog_14.InitCustomDialog("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");
      customDialog_14.ShowCustomDialog();
      PTL::ResetLoadingStateAndSequences();
      PTL::SetLoadingState("UserResponseTime", hslInfinite);
      PTL::SetLoadingState("ErrorHandling", 3);
      PTL::SetLoadingState("CalibrateCarrierChannel", -1);
      PTL::SetLoadingSize(1);
      PTL::SetLoadingSequence(0, seq_TipsToUse, 1, -10, hslTrue, hslTrue, Tip_Counter);
      if( 0 == PTL::Load(ML_STAR, hslTrue) )
      {
            PTL::RaiseRuntimeError(-1556872960, PTL::IDS::smartStepLoad, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
      PTL::GetLoadingSequence(0, seq_TipsToUse);
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
      onerror goto errLabel_16 ;
      err.Clear();
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      errLabel_16 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        dialogHandle_13.SetOutput(Translate("The instrument is still having trouble picking up tips."), Translate("\n\nThe method will now abort."), Translate("\n\nIf this issue persists, please contact Hamilton Service."));
        dialogHandle_13.ShowOutput(Translate("Error Picking Up Tips"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        abort;
      }   /* end if from skip handler if no error */
    }
    if (ret_RetryNextTipRack == 1)
    {
      if (var_TipSequenceCurrentPosition <= 96)
      {
        seq_TipsToUse.SetCurrentPosition(97);
      }
      else
      {
        if (var_TipSequenceCurrentPosition <= 192)
        {
          seq_TipsToUse.SetCurrentPosition(193);
        }
        else
        {
          if (var_TipSequenceCurrentPosition <= 288)
          {
            seq_TipsToUse.SetCurrentPosition(289);
          }
          else
          {
            if (var_TipSequenceCurrentPosition <= 384)
            {
              seq_TipsToUse.SetCurrentPosition(385);
            }
            else
            {
              if (var_TipSequenceCurrentPosition <= 480)
              {
                seq_TipsToUse.SetCurrentPosition(481);
              }
              else
              {
                if (var_TipSequenceCurrentPosition <= 576)
                {
                  seq_TipsToUse.SetCurrentPosition(577);
                }
                else
                {
                  if (var_TipSequenceCurrentPosition <= 672)
                  {
                    seq_TipsToUse.SetCurrentPosition(673);
                  }
                  else
                  {
                    if (var_TipSequenceCurrentPosition <= 768)
                    {
                      seq_TipsToUse.SetCurrentPosition(769);
                    }
                    else
                    {
                      if (var_TipSequenceCurrentPosition <= 864)
                      {
                        seq_TipsToUse.SetCurrentPosition(865);
                      }
                    }
                  }
                }
              }
            }
          }
        }
      }
      onerror goto errLabel_17 ;
      err.Clear();
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      errLabel_17 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        dialogHandle_12.SetOutput(Translate("The instrument is still having trouble picking up tips."), Translate("\n\nThe method will now abort."), Translate("\n\nIf this issue persists, please contact Hamilton Service."));
        dialogHandle_12.ShowOutput(Translate("Error Picking Up Tips"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        abort;
      }   /* end if from skip handler if no error */
    }
  }
  MECC::TraceComment(Translate("END TIP PICKUP ERROR HANDLING"));
}

function Transfer_PlateToPlate( sequence & seq_TipsToUse, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_VolumeToTransfer, variable var_LiquidClass, variable var_AspirationHeight, variable var_DispenseHeight ) void {
  private variable Asp_Submerge;
  private variable Asp_cLLD_sensitivity;
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Transfer_PlateToPlate <<<<<<<<<<"));
  if (var_AspirationHeight == 0)
  {
    Asp_cLLD_sensitivity = 1;
    Asp_Submerge = 0.5;
  }
  else
  {
    Asp_cLLD_sensitivity = 0;
    Asp_Submerge = 0;
  }
  HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
  {
    loopCounter1 = 0;
    while (
       (seq_AspirationPosition.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1);
      loopCounter1 = loopCounter1 + 1;
      onerror goto errLabel_18 ;
      err.Clear();
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      errLabel_18 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        ErrorHandling_TipPickup(seq_TipsToUse);
      }   /* end if from skip handler if no error */
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (seq_AspirationPosition.GetCurrentPosition() > 0 && seq_AspirationPosition.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
    seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
    seq_AspirationPosition.SetCurrentPosition(1);
    seq_DispensePosition.SetCurrentPosition(1);
  }
  HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
  STCC::ResetFilterSequences();
  STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
  {
    variable _FilterIdsArray_19[];
    variable _ColumnIdsArray_19[];
    variable _ColumnNamesArray_19[];
    variable _ExperimentsArray_19[];
    _FilterIdsArray_19.SetSize(0);
    _ColumnNamesArray_19.SetSize(14);
    _ColumnIdsArray_19.SetSize(14);
    _ColumnNamesArray_19.SetAt(0, "RecordId");
    _ColumnIdsArray_19.SetAt(0, 0);
    _ColumnNamesArray_19.SetAt(1, "TRackBC");
    _ColumnIdsArray_19.SetAt(1, 1);
    _ColumnNamesArray_19.SetAt(2, "TLabwareId");
    _ColumnIdsArray_19.SetAt(2, 2);
    _ColumnNamesArray_19.SetAt(3, "TPositionId");
    _ColumnIdsArray_19.SetAt(3, 3);
    _ColumnNamesArray_19.SetAt(4, "TPositionBC");
    _ColumnIdsArray_19.SetAt(4, 4);
    _ColumnNamesArray_19.SetAt(5, "TStatusSummary");
    _ColumnIdsArray_19.SetAt(5, 5);
    _ColumnNamesArray_19.SetAt(6, "TSumStateDescription");
    _ColumnIdsArray_19.SetAt(6, 6);
    _ColumnNamesArray_19.SetAt(7, "TVolume");
    _ColumnIdsArray_19.SetAt(7, 7);
    _ColumnNamesArray_19.SetAt(8, "SRackBC");
    _ColumnIdsArray_19.SetAt(8, 8);
    _ColumnNamesArray_19.SetAt(9, "SLabwareId");
    _ColumnIdsArray_19.SetAt(9, 9);
    _ColumnNamesArray_19.SetAt(10, "SPositionId");
    _ColumnIdsArray_19.SetAt(10, 10);
    _ColumnNamesArray_19.SetAt(11, "SPositionBC");
    _ColumnIdsArray_19.SetAt(11, 11);
    _ColumnNamesArray_19.SetAt(12, "ActionDateTime");
    _ColumnIdsArray_19.SetAt(12, 12);
    _ColumnNamesArray_19.SetAt(13, "UserName");
    _ColumnIdsArray_19.SetAt(13, 13);
    _ExperimentsArray_19.SetSize(0);
    STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_19, 0, _ColumnIdsArray_19, _ColumnNamesArray_19, _ExperimentsArray_19, "TransferPlateToPlate_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
  }
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Transfer_PlateToPlate <<<<<<<<<<"));
}

function Transfer_PlatetoWaste( sequence & seq_AspirationPosition, variable var_VolumeToTransfer, variable var_LiquidClass ) void {
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Transfer_PlatetoWaste <<<<<<<<<<"));
  HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
  {
    loopCounter1 = 0;
    while (
       (seq_AspirationPosition.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, seq_AspirationPosition, 1);
      loopCounter1 = loopCounter1 + 1;
      onerror goto errLabel_20 ;
      err.Clear();
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      errLabel_20 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        ErrorHandling_TipPickup(ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
      }   /* end if from skip handler if no error */
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (seq_AspirationPosition.GetCurrentPosition() > 0 && seq_AspirationPosition.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
    seq_AspirationPosition.SetCurrentPosition(1);
  }
  HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Transfer_PlatetoWaste <<<<<<<<<<"));
}

function Add_Ethanol( variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_LiquidClassEthanol ) void {
  private variable NumberOfCompleteColumns;
  private variable AspVolume_Ethanol1;
  private variable AspVolume_Ethanol2;
  private variable RemainingWells;
  private variable AspVolume_Ethanol;
  private variable NumberOfColumns;
  private variable AspVolume_Ethanol3;
  private variable NumberOfDispenses1;
  private variable MixCycles;
  private variable VolumeToAspirate;
  private variable NumberOfDispenses2;
  private variable ActualIncubationDuration;
  private variable NumberOfDispenses3;
  private variable Timer_Incubate30sec;
  private variable loopCounter4;
  private variable NumberOfDispenses;
  private variable NumberOfAspirations;
  private timer Incubate30sec;
  if (bln_Global_SkipAllTimers == 0)
  {
    Timer_Incubate30sec = 23;
  }
  else
  {
    Timer_Incubate30sec = 1;
  }
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_Ethanol <<<<<<<<<<"));
  NumberOfCompleteColumns = var_NumberOfSamples / 8;
  RemainingWells = var_NumberOfSamples % 8;
  Trace ("Number of Complete Columns in Destination Plate:  ", NumberOfCompleteColumns);
  Trace ("Number of Wells in Last, Incomplete Column:  ", RemainingWells);
  if (RemainingWells > 0)
  {
    NumberOfColumns = NumberOfCompleteColumns + 1;
  }
  else
  {
    NumberOfColumns = NumberOfCompleteColumns;
  }
  AspVolume_Ethanol = 200 * NumberOfColumns;
  Trace ("Required Total Volume for Ethanol, Per Row, Max = ", AspVolume_Ethanol);
  if (AspVolume_Ethanol <= 1000)
  {
    NumberOfAspirations = 1;
    NumberOfDispenses1 = NumberOfColumns;
    AspVolume_Ethanol1 = AspVolume_Ethanol;
  }
  else
  {
    NumberOfAspirations = AspVolume_Ethanol / (1000 * 1.0);
    NumberOfAspirations = MthCeiling(NumberOfAspirations);
    NumberOfDispenses1 = 5;
    NumberOfDispenses2 = NumberOfColumns - NumberOfDispenses1;
    if (NumberOfDispenses2 > 5)
    {
      NumberOfDispenses3 = NumberOfDispenses2 - 5;
      NumberOfDispenses2 = 5;
    }
    AspVolume_Ethanol1 = 200 * NumberOfDispenses1;
    AspVolume_Ethanol2 = 200 * NumberOfDispenses2;
    AspVolume_Ethanol3 = 200 * NumberOfDispenses3;
  }
  Trace ("Number of Aspirations:  ", NumberOfAspirations);
  Trace ("Number of Columns for the first set of dispenses:  ", NumberOfDispenses1);
  Trace ("Number of Columns for the second set of dispenses:  ", NumberOfDispenses2);
  Trace ("Number of Columns for the third set of dispenses:  ", NumberOfDispenses3);
  Trace ("Aspiration volume for the first set of dispenses:  ", AspVolume_Ethanol1);
  Trace ("Aspiration volume for the second set of dispenses:  ", AspVolume_Ethanol2);
  Trace ("Aspiration volume for the third set of dispenses:  ", AspVolume_Ethanol3);
  HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
  {
    loopCounter4 = 0;
    while (
       (seq_DispensePosition.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1);
      loopCounter4 = loopCounter4 + 1;
      if (loopCounter4 == 1)
      {
        onerror goto errLabel_21 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_21 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
        }   /* end if from skip handler if no error */
        VolumeToAspirate = AspVolume_Ethanol1;
        NumberOfDispenses = NumberOfDispenses1;
        MixCycles = 1;
      }
      if (loopCounter4 == 2)
      {
        VolumeToAspirate = AspVolume_Ethanol2;
        NumberOfDispenses = NumberOfDispenses2;
        MixCycles = 0;
      }
      if (loopCounter4 == 3)
      {
        VolumeToAspirate = AspVolume_Ethanol3;
        NumberOfDispenses = NumberOfDispenses3;
        MixCycles = 0;
      }
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      {
        for(loopCounter3 = 0; loopCounter3 < NumberOfDispenses;)
        {
          loopCounter3 = loopCounter3 + 1;
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
      }
      if (loopCounter4 == 1)
      {
        if( 0 == Incubate30sec.SetTimer(Timer_Incubate30sec) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      if (
         (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
    seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
    seq_DispensePosition.SetCurrentPosition(1);
  }
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  STCC::ResetFilterSequences();
  STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
  {
    variable _FilterIdsArray_22[];
    variable _ColumnIdsArray_22[];
    variable _ColumnNamesArray_22[];
    variable _ExperimentsArray_22[];
    _FilterIdsArray_22.SetSize(0);
    _ColumnNamesArray_22.SetSize(14);
    _ColumnIdsArray_22.SetSize(14);
    _ColumnNamesArray_22.SetAt(0, "RecordId");
    _ColumnIdsArray_22.SetAt(0, 0);
    _ColumnNamesArray_22.SetAt(1, "TRackBC");
    _ColumnIdsArray_22.SetAt(1, 1);
    _ColumnNamesArray_22.SetAt(2, "TLabwareId");
    _ColumnIdsArray_22.SetAt(2, 2);
    _ColumnNamesArray_22.SetAt(3, "TPositionId");
    _ColumnIdsArray_22.SetAt(3, 3);
    _ColumnNamesArray_22.SetAt(4, "TPositionBC");
    _ColumnIdsArray_22.SetAt(4, 4);
    _ColumnNamesArray_22.SetAt(5, "TStatusSummary");
    _ColumnIdsArray_22.SetAt(5, 5);
    _ColumnNamesArray_22.SetAt(6, "TSumStateDescription");
    _ColumnIdsArray_22.SetAt(6, 6);
    _ColumnNamesArray_22.SetAt(7, "TVolume");
    _ColumnIdsArray_22.SetAt(7, 7);
    _ColumnNamesArray_22.SetAt(8, "SRackBC");
    _ColumnIdsArray_22.SetAt(8, 8);
    _ColumnNamesArray_22.SetAt(9, "SLabwareId");
    _ColumnIdsArray_22.SetAt(9, 9);
    _ColumnNamesArray_22.SetAt(10, "SPositionId");
    _ColumnIdsArray_22.SetAt(10, 10);
    _ColumnNamesArray_22.SetAt(11, "SPositionBC");
    _ColumnIdsArray_22.SetAt(11, 11);
    _ColumnNamesArray_22.SetAt(12, "ActionDateTime");
    _ColumnIdsArray_22.SetAt(12, 12);
    _ColumnNamesArray_22.SetAt(13, "UserName");
    _ColumnIdsArray_22.SetAt(13, 13);
    _ExperimentsArray_22.SetSize(0);
    STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_22, 0, _ColumnIdsArray_22, _ColumnNamesArray_22, _ExperimentsArray_22, "Ethanol_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
  }
  seq_DispensePosition.SetCurrentPosition(1);
  HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
  if( 0 == Incubate30sec.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  ActualIncubationDuration = Incubate30sec.GetElapsedTime();
  Trace ("***** Actual incubation time (expected minimum 30 seconds for first column of wells):  ", ActualIncubationDuration);
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_Ethanol <<<<<<<<<<"));
}

function Remove_ResidualEtOH( sequence & seq_AspirationPosition ) void {
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Remove_ResidualEtOH <<<<<<<<<<"));
  HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
  {
    loopCounter1 = 0;
    while (
       (seq_AspirationPosition.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, seq_AspirationPosition, 1);
      loopCounter1 = loopCounter1 + 1;
      onerror goto errLabel_23 ;
      err.Clear();
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      errLabel_23 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        ErrorHandling_TipPickup(ML_STAR.MlStar50ulTipWithFilter);
      }   /* end if from skip handler if no error */
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (seq_AspirationPosition.GetCurrentPosition() > 0 && seq_AspirationPosition.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
    seq_AspirationPosition.SetCurrentPosition(1);
  }
  HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Remove_ResidualEtOH <<<<<<<<<<"));
}

function Add_RSB( sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse, variable var_VolPerSampleWell, variable var_TouchOff, variable var_RetractHeight ) void {
  private variable DispenseAboveTouch;
  private variable FixedHeight;
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_RSB <<<<<<<<<<"));
  if (var_TouchOff == 1)
  {
    FixedHeight = 0;
    DispenseAboveTouch = 1;
  }
  else
  {
    FixedHeight = 0.1;
    DispenseAboveTouch = 0;
  }
  {
    loopCounter1 = 0;
    while (
       (seq_DispensePosition.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1);
      loopCounter1 = loopCounter1 + 1;
      onerror goto errLabel_24 ;
      err.Clear();
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      errLabel_24 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        ErrorHandling_TipPickup(seq_TipsToUse);
      }   /* end if from skip handler if no error */
      if (var_VolPerSampleWell <= 50)
      {
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      }
      else
      {
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      }
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
    seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
    seq_AspirationPosition.SetCurrentPosition(1);
    seq_DispensePosition.SetCurrentPosition(1);
  }
  MECC::TraceComment(Translate("******** Create mapping files ********"));
  STCC::ResetFilterSequences();
  STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
  {
    variable _FilterIdsArray_25[];
    variable _ColumnIdsArray_25[];
    variable _ColumnNamesArray_25[];
    variable _ExperimentsArray_25[];
    _FilterIdsArray_25.SetSize(1);
    _ColumnNamesArray_25.SetSize(10);
    _ColumnIdsArray_25.SetSize(10);
    _FilterIdsArray_25.SetAt(0, 10);
    _ColumnNamesArray_25.SetAt(0, "TRackBC");
    _ColumnIdsArray_25.SetAt(0, 1);
    _ColumnNamesArray_25.SetAt(1, "TLabwareId");
    _ColumnIdsArray_25.SetAt(1, 2);
    _ColumnNamesArray_25.SetAt(2, "TPositionId");
    _ColumnIdsArray_25.SetAt(2, 3);
    _ColumnNamesArray_25.SetAt(3, "TStatusSummary");
    _ColumnIdsArray_25.SetAt(3, 5);
    _ColumnNamesArray_25.SetAt(4, "TSumStateDescription");
    _ColumnIdsArray_25.SetAt(4, 6);
    _ColumnNamesArray_25.SetAt(5, "SRackBC");
    _ColumnIdsArray_25.SetAt(5, 8);
    _ColumnNamesArray_25.SetAt(6, "SLabwareId");
    _ColumnIdsArray_25.SetAt(6, 9);
    _ColumnNamesArray_25.SetAt(7, "SPositionId");
    _ColumnIdsArray_25.SetAt(7, 10);
    _ColumnNamesArray_25.SetAt(8, "SPositionBC");
    _ColumnIdsArray_25.SetAt(8, 11);
    _ColumnNamesArray_25.SetAt(9, "ActionDateTime");
    _ColumnIdsArray_25.SetAt(9, 12);
    _ExperimentsArray_25.SetSize(0);
    STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 4, _FilterIdsArray_25, 0, _ColumnIdsArray_25, _ColumnNamesArray_25, _ExperimentsArray_25, "<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
  }
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_RSB <<<<<<<<<<"));
}

function SetHHSTemperature( variable var_HHS_ID, variable var_Temperature ) void {
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  SetHHSTemperature <<<<<<<<<<"));
  HSLHamHeaterShaker::StopTempCtrl(var_HHS_ID);
  if (var_Temperature != 0)
  {
    Trace ("***** HHS number ", var_HHS_ID, " is being set to ", var_Temperature, "C");
    HSLHamHeaterShaker::StartTempCtrl(var_HHS_ID, var_Temperature, 0);
  }
  else
  {
    Trace ("***** HHS number ", var_HHS_ID, " is not being controlled, as it is desired to be at room temperature.");
  }
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  SetHHSTemperature <<<<<<<<<<"));
}
