 namespace _Method { #include "Common\\iSWAP-PlateAndLidMovement.hs_" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_Device_Controllers.hs_" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_TruSeqNano_Prep.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
#include "Post-Selection PCR and clean-up.24 samples.res"
variable bln_Global_SimulatorMode;
variable pipette_volume;
variable loopCounter2;
variable is_debugging;
global device ML_STAR ("Post-Selection PCR and clean-up.24 samples.lay", "ML_STAR", hslTrue);
global device HxFan ("Post-Selection PCR and clean-up.24 samples.lay", "HxFan", hslTrue);
sequence Sample_Plate_arr[];
sequence Sample_Plate;
sequence Rev_Primer_arr[];
sequence Rev_Primer;
variable time_point;
variable bln_Global_SkipAllTimers;
variable timer_2_min;
variable timer_5_min;
variable timer_3_min;
sequence Pooling_arr[];
sequence Pooling_to;
variable loopCounter4;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ISWAP_PLATEANDLIDMOVEMENT::_InitLibrary();
    NIST_DEVICE_CONTROLLERS::_InitLibrary();
    NIST_TRUSEQNANO_PREP::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    bln_Global_SimulatorMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    is_debugging = "false";
    bln_Global_SkipAllTimers = 1;
    if (bln_Global_SkipAllTimers == 1)
    {
      timer_2_min = 1;
      timer_3_min = 1;
      timer_5_min = 1;
    }
    else
    {
      timer_2_min = 120;
      timer_3_min = 180;
      timer_5_min = 300;
    }
    GetParams();
    StartUp();
    Sample_Plate_arr.SetSize(0);
    Sample_Plate_arr.AddAsLast(ML_STAR.Sample_Plate_1);
    Sample_Plate_arr.AddAsLast(ML_STAR.Sample_Plate_2);
    Sample_Plate_arr.AddAsLast(ML_STAR.Sample_Plate_3);
    Sample_Plate_arr.AddAsLast(ML_STAR.Sample_Plate_4);
    Sample_Plate=Sample_Plate_arr.GetAt(time_point-1);
    Rev_Primer_arr.SetSize(0);
    Rev_Primer_arr.AddAsLast(ML_STAR.Rev_Primers_1);
    Rev_Primer_arr.AddAsLast(ML_STAR.Rev_Primers_2);
    Rev_Primer_arr.AddAsLast(ML_STAR.Rev_Primers_3);
    Rev_Primer_arr.AddAsLast(ML_STAR.Rev_Primers_4);
    Rev_Primer=Rev_Primer_arr.GetAt(time_point-1);
    Pooling_arr.SetSize(0);
    Pooling_arr.AddAsLast(ML_STAR.Pooling_Plate_1);
    Pooling_arr.AddAsLast(ML_STAR.Pooling_Plate_2);
    Pooling_arr.AddAsLast(ML_STAR.Pooling_Plate_3);
    Pooling_arr.AddAsLast(ML_STAR.Pooling_Plate_4);
    Pooling_to=Pooling_arr.GetAt(time_point-1);
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Sample_Plate_lid, ML_STAR.Sample_Plate_Lid_Parking, 1, 1, ML_STAR);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    pipette_volume = 50;
    {
      loopCounter4 = 0;
      while (
         (Sample_Plate.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, Sample_Plate, 1);
        loopCounter4 = loopCounter4 + 1;
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (
           (Sample_Plate.GetCurrentPosition() > 0 && Sample_Plate.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      Sample_Plate.SetMax(Sample_Plate.GetTotal());
      Sample_Plate.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Sample_Plate_Lid_Parking, ML_STAR.Sample_Plate_lid, 1, 1, ML_STAR);
    CleanUp();
    ISWAP_PLATEANDLIDMOVEMENT::_ExitLibrary();
    NIST_DEVICE_CONTROLLERS::_ExitLibrary();
    NIST_TRUSEQNANO_PREP::_ExitLibrary();
  } }
