private function CleanUp(  ) void ;
private function GetParams(  ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function CleanUp(  ) void {
  MECC::TraceComment(Translate("***************************************************************************\nCleanUp() submethod\n***************************************************************************"));
  TipCount::Write2(ML_STAR.MlStar50ulTipWithFilter, "tip_counter_50", ML_STAR);
  TipCount::Write2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, "tip_counter_300", ML_STAR);
  TipCount::Write2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, "tip_counter_1000", ML_STAR);
}

private function StartUp(  ) void {
  MECC::TraceComment(Translate("***************************************************************************\nStartUp() submethod\n***************************************************************************"));
  TipCount::Edit2(ML_STAR.MlStar50ulTipWithFilter, "tip_counter_50", ML_STAR, 300);
  TipCount::Edit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, "tip_counter_300", ML_STAR, 300);
  TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, "tip_counter_1000", ML_STAR, 300);
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  if (bln_Global_SimulatorMode == 0)
  {
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
}

private function GetParams(  ) void {
  private variable param_dict;
  private variable loc;
  private variable read_line;
  private file file1;
  private variable split_line[];
  private variable time_point_str;
  private variable key_exists;
  private variable param_file;
  private variable file_exists;
  private dialog customDialog_1;
  private dialog dialogHandle_2;
  private dialog customDialog_3;
  private dialog dialogHandle_4;
  param_dict = "param_dict";
  HSLExtensions::Dictionary::CreateDictionary(param_dict, 2);
  param_file = "C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv";
  file_exists = HSLExtensions::File::Exists(param_file);
  if (file_exists == 1)
  {
    file1.AddField(1, read_line, hslString);
    file1.SetDelimiter(hslAsciiText);
    if( 0 == file1.Open(param_file, hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, param_file, "HxMetEdCompCmd");
    }
    {
      loopCounter2 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter2 = loopCounter2 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        loc = StrFind(read_line, ",");
        if (loc > 0)
        {
          split_line = HSLExtensions::String::Split(read_line, Translate(","), 1);
          HSLExtensions::Dictionary::AddItem(param_dict, split_line.ElementAt( 1 -1), split_line.ElementAt( 2 -1));
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    key_exists = HSLExtensions::Dictionary::ExistsItem(param_dict, "timePoint");
    if (key_exists == 1)
    {
      time_point_str = HSLExtensions::Dictionary::GetItem(param_dict, "timePoint");
      time_point = StrFVal(time_point_str);
      if (time_point > 4)
      {
        customDialog_3.InitCustomDialog("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");
        customDialog_3.ShowCustomDialog();
        abort;
      }
      else
      {
        if (time_point < 1)
        {
          customDialog_1.InitCustomDialog("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");
          customDialog_1.ShowCustomDialog();
          abort;
        }
      }
    }
    else
    {
      dialogHandle_2.SetInputSize(1);
      dialogHandle_2.SetInputField(0, Translate("Time Point?"), hslInteger, 1, 1, 4);
      dialogHandle_2.ShowInput(Translate("Select time point (1-4):"), hslInfinite, hslOKOnly | hslDefButton1);
      time_point = dialogHandle_2.GetInputField(0);
    }
  }
  else
  {
    dialogHandle_4.SetInputSize(1);
    dialogHandle_4.SetInputField(0, Translate("Time Point?"), hslInteger, 1, 1, 4);
    dialogHandle_4.ShowInput(Translate("Select time point (1-4):"), hslInfinite, hslOKOnly | hslDefButton1);
    time_point = dialogHandle_4.GetInputField(0);
  }
}
