#include "Post-Selection PCR and clean-up.24 samples.res"
global device ML_STAR ("Post-Selection PCR and clean-up.24 samples.lay", "ML_STAR", hslTrue);
global device HxFan ("Post-Selection PCR and clean-up.24 samples.lay", "HxFan", hslTrue);
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_Device_Controllers.hs_" }
 namespace _Method { #include "NIST\\Libraries\\NIST_TruSeqNano_Prep.hs_" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "Common\\iSWAP-PlateAndLidMovement.hs_" }
variable is_pipetting;
variable include_TP_1;
variable include_TP_2;
variable include_TP_3;
variable include_TP_4;
variable bln_Global_SimulatorMode;
variable F_primer_vol_per_well;
variable include_TP_arr[];
variable loopCounter1;
variable dead_volume_per_well;
variable R_primer_vol_per_well;
variable F_total_vol_per_well;
variable R_total_vol_per_well;
variable primer_ratio;
variable master_mix_ratio;
variable F_mm_vol_per_well;
variable R_mm_vol_per_well;
variable num_F_wells;
variable num_R_wells;
variable F_mm_total_vol;
variable R_mm_total_vol;
variable MM_total_volume;
variable pipette_volume;
sequence R_MM_arr[];
sequence Rev_primers_stock_arr[];
variable loopCounter2;
variable mix_volume;
sequence asp_seq;
sequence disp_seq;
dialog dialogHandle_1;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    NIST_DEVICE_CONTROLLERS::_InitLibrary();
    NIST_TRUSEQNANO_PREP::_InitLibrary();
    ISWAP_PLATEANDLIDMOVEMENT::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    bln_Global_SimulatorMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    is_pipetting = "true";
    StartUp();
    dead_volume_per_well = 50;
    F_total_vol_per_well = dead_volume_per_well;
    R_total_vol_per_well = dead_volume_per_well + 200;
    include_TP_arr.SetSize(0);
    include_TP_arr.AddAsLast(include_TP_1);
    include_TP_arr.AddAsLast(include_TP_2);
    include_TP_arr.AddAsLast(include_TP_3);
    include_TP_arr.AddAsLast(include_TP_4);
    R_MM_arr.SetSize(0);
    R_MM_arr.AddAsLast(ML_STAR.R_MM_1);
    R_MM_arr.AddAsLast(ML_STAR.R_MM_2);
    R_MM_arr.AddAsLast(ML_STAR.R_MM_3);
    R_MM_arr.AddAsLast(ML_STAR.R_MM_4);
    Rev_primers_stock_arr.SetSize(0);
    Rev_primers_stock_arr.AddAsLast(ML_STAR.Rev_Primers_1_stock);
    Rev_primers_stock_arr.AddAsLast(ML_STAR.Rev_Primers_2_stock);
    Rev_primers_stock_arr.AddAsLast(ML_STAR.Rev_Primers_3_stock);
    Rev_primers_stock_arr.AddAsLast(ML_STAR.Rev_Primers_4_stock);
    num_F_wells = 8;
    num_R_wells = 0;
    {
      for(loopCounter1 = 0; loopCounter1 < 4;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (include_TP_arr.ElementAt( loopCounter1 -1) == 1)
        {
          F_total_vol_per_well = F_total_vol_per_well + 75;
          num_R_wells = num_R_wells + 3;
        }
      }
    }
    primer_ratio = 2.5 / (25 * 1.0);
    master_mix_ratio = 22.5 / (25 * 1.0);
    F_primer_vol_per_well = F_total_vol_per_well * primer_ratio;
    R_primer_vol_per_well = R_total_vol_per_well * primer_ratio;
    F_mm_vol_per_well = F_total_vol_per_well * master_mix_ratio;
    R_mm_vol_per_well = R_total_vol_per_well * master_mix_ratio;
    F_mm_total_vol = F_mm_vol_per_well * num_F_wells;
    R_mm_total_vol = R_mm_vol_per_well * num_R_wells;
    MM_total_volume = F_mm_total_vol + R_mm_total_vol;
    dialogHandle_1.SetOutput(Translate("Volume to mix for each F well: "), F_total_vol_per_well, "\n", Translate("Volume to mix for each R well: "), R_total_vol_per_well, "\n", Translate(""), "\n", Translate("Total volume required for each F primer: "), F_primer_vol_per_well, "\n", Translate("Total volume required for each R primer: "), R_primer_vol_per_well, "\n", Translate(""), "\n", Translate("Total volume of master mix required: "), MM_total_volume);
    dialogHandle_1.ShowOutput(Translate("Volume per Well to Prepare"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    MECC::TraceComment(Translate("***** Pipette Master Mix and add primers *****"));
    MECC::TraceComment(Translate("*** Remove lid from Reagent_Plate ***"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Reagent_Plate_lid, ML_STAR.Reagent_plate_lid_parking, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("*** F wells ***"));
    MECC::TraceComment(Translate("*** add master mix ***"));
    pipette_volume = F_mm_vol_per_well;
    {
      loopCounter2 = 0;
      ML_STAR.MM_w_F_primers.SetCurrentPosition(1);
      while (
         (ML_STAR.MM_w_F_primers.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MM_w_F_primers, 1, ML_STAR.Forw_Primers_stock, 1);
        loopCounter2 = loopCounter2 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.MM_w_F_primers.GetCurrentPosition() > 0 && ML_STAR.MM_w_F_primers.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MM_w_F_primers.SetMax(ML_STAR.MM_w_F_primers.GetTotal());
      ML_STAR.Forw_Primers_stock.SetMax(ML_STAR.Forw_Primers_stock.GetTotal());
      ML_STAR.MM_w_F_primers.SetCurrentPosition(1);
      ML_STAR.Forw_Primers_stock.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("*** add primers ***"));
    pipette_volume = F_primer_vol_per_well;
    {
      loopCounter2 = 0;
      ML_STAR.MM_w_F_primers.SetCurrentPosition(1);
      while (
         (ML_STAR.MM_w_F_primers.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MM_w_F_primers, 1, ML_STAR.Forw_Primers_stock, 1);
        loopCounter2 = loopCounter2 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.MM_w_F_primers.GetCurrentPosition() > 0 && ML_STAR.MM_w_F_primers.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MM_w_F_primers.SetMax(ML_STAR.MM_w_F_primers.GetTotal());
      ML_STAR.Forw_Primers_stock.SetMax(ML_STAR.Forw_Primers_stock.GetTotal());
      ML_STAR.MM_w_F_primers.SetCurrentPosition(1);
      ML_STAR.Forw_Primers_stock.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("*** mix ***"));
    mix_volume = F_total_vol_per_well;
    mix_volume = mix_volume - dead_volume_per_well;
    if (mix_volume > 300)
    {
      mix_volume = 300;
    }
    {
      loopCounter2 = 0;
      ML_STAR.MM_w_F_primers.SetCurrentPosition(1);
      while (
         (ML_STAR.MM_w_F_primers.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MM_w_F_primers, 1);
        loopCounter2 = loopCounter2 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.MM_w_F_primers.GetCurrentPosition() > 0 && ML_STAR.MM_w_F_primers.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MM_w_F_primers.SetMax(ML_STAR.MM_w_F_primers.GetTotal());
      ML_STAR.MM_w_F_primers.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("********************************************************"));
    MECC::TraceComment(Translate("*** R wells ***"));
    {
      for(loopCounter1 = 0; loopCounter1 < 4;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (include_TP_arr.ElementAt( loopCounter1 -1) == 1)
        {
          disp_seq=R_MM_arr.GetAt(loopCounter1-1);
          MECC::TraceComment(Translate("*** add master mix ***"));
          pipette_volume = R_mm_vol_per_well;
          {
            loopCounter2 = 0;
            disp_seq.SetCurrentPosition(1);
            while (
               (disp_seq.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, ML_STAR.Master_Mix_stock_12, 1, disp_seq, 1);
              loopCounter2 = loopCounter2 + 1;
              ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              if (
                 (disp_seq.GetCurrentPosition() > 0 && disp_seq.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            ML_STAR.Master_Mix_stock_12.SetMax(ML_STAR.Master_Mix_stock_12.GetTotal());
            disp_seq.SetMax(disp_seq.GetTotal());
            disp_seq.SetCurrentPosition(1);
          }
          MECC::TraceComment(Translate("*** add primers ***"));
          pipette_volume = R_primer_vol_per_well;
          asp_seq=Rev_primers_stock_arr.GetAt(loopCounter1-1);
          {
            loopCounter2 = 0;
            asp_seq.SetCurrentPosition(1);
            disp_seq.SetCurrentPosition(1);
            while (
               (disp_seq.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, asp_seq, 1, disp_seq, 1);
              loopCounter2 = loopCounter2 + 1;
              ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              if (
                 (disp_seq.GetCurrentPosition() > 0 && disp_seq.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            asp_seq.SetMax(asp_seq.GetTotal());
            disp_seq.SetMax(disp_seq.GetTotal());
            asp_seq.SetCurrentPosition(1);
            disp_seq.SetCurrentPosition(1);
          }
          MECC::TraceComment(Translate("*** mix ***"));
          mix_volume = R_total_vol_per_well;
          mix_volume = mix_volume - dead_volume_per_well;
          if (mix_volume > 300)
          {
            mix_volume = 300;
          }
          {
            loopCounter2 = 0;
            disp_seq.SetCurrentPosition(1);
            while (
               (disp_seq.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, disp_seq, 1);
              loopCounter2 = loopCounter2 + 1;
              ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
              if (
                 (disp_seq.GetCurrentPosition() > 0 && disp_seq.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            disp_seq.SetMax(disp_seq.GetTotal());
            disp_seq.SetCurrentPosition(1);
          }
        }
      }
    }
    MECC::TraceComment(Translate("*** Replace lid on Reagent_Plate ***"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.Reagent_plate_lid_parking, ML_STAR.Reagent_Plate_lid, 1, 1, ML_STAR);
    CleanUp();
    NIST_DEVICE_CONTROLLERS::_ExitLibrary();
    NIST_TRUSEQNANO_PREP::_ExitLibrary();
    ISWAP_PLATEANDLIDMOVEMENT::_ExitLibrary();
  } }
