private function CleanUp(  ) void ;
private function Initialize_HHS( variable & var_Local_DeviceID, variable var_Local_Node ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function StartUp(  ) void {
  private variable HHS3;
  private variable str_Global_ODTCIPAddress;
  private variable SetTempCPAC;
  private variable ODTC;
  private variable SetTempHHS3;
  private variable var_Global_HHSNode3;
  private dialog customDialog_1;
  private variable user_choice;
  MECC::TraceComment(Translate("***************************************************************************\nStartUp() submethod\n***************************************************************************"));
  TipCount::Edit2(ML_STAR.MlStar50ulTipWithFilter, "tip_counter_50", ML_STAR, 300);
  TipCount::Edit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, "tip_counter_300", ML_STAR, 300);
  TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, "tip_counter_1000", ML_STAR, 300);
  if (bln_Global_SimulatorMode == 0)
  {
    {
      	HxFan.SetComPort("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"); // SetComPort
    }
    {
      	HxFan.SetFanSpeed("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"); // SetFanSpeed
    }
    {
      	HxFan.SetContinuousMode("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"); // SetContinuousMode
    }
  }
  include_TP_1 = 1;
  include_TP_2 = 1;
  include_TP_3 = 1;
  include_TP_4 = 1;
  user_choice = 1;
  customDialog_1.InitCustomDialog("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");
  customDialog_1.SetCustomDialogProperty( "checkBox1.IsChecked", include_TP_1 );
  customDialog_1.SetCustomDialogProperty( "checkBox2.IsChecked", include_TP_2 );
  customDialog_1.SetCustomDialogProperty( "checkBox3.IsChecked", include_TP_3 );
  customDialog_1.SetCustomDialogProperty( "checkBox4.IsChecked", include_TP_4 );
  customDialog_1.ShowCustomDialog();
  user_choice = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
  include_TP_1 = customDialog_1.GetCustomDialogProperty( "checkBox1.IsChecked" );
  include_TP_2 = customDialog_1.GetCustomDialogProperty( "checkBox2.IsChecked" );
  include_TP_3 = customDialog_1.GetCustomDialogProperty( "checkBox3.IsChecked" );
  include_TP_4 = customDialog_1.GetCustomDialogProperty( "checkBox4.IsChecked" );
  if (user_choice == 2)
  {
    abort;
  }
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  if(0){
    ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
  }
  if (bln_Global_SimulatorMode == 0)
  {
    if(0){
      str_Global_ODTCIPAddress = Translate("192.168.88.253");
    }
    str_Global_ODTCIPAddress = Translate("169.254.207.19");
    var_Global_HHSNode3 = 3;
    SetTempHHS3 = 20;
    Initialize_HHS(HHS3, var_Global_HHSNode3);
    NIST_TRUSEQNANO_PREP::SetHHSTemperature(HHS3, SetTempHHS3);
    HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
    NIST_DEVICE_CONTROLLERS::InitODTC(str_Global_ODTCIPAddress, ODTC);
    if (is_pipetting == "true")
    {
      SetTempCPAC = 6;
    }
    else
    {
      SetTempCPAC = 37;
    }
    NIST_DEVICE_CONTROLLERS::InitCPAC();
    NIST_DEVICE_CONTROLLERS::SetCPACTemperature(1, SetTempCPAC);
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
}

private function CleanUp(  ) void {
  private variable HHS3;
  private variable ODTC;
  private variable time_point;
  MECC::TraceComment(Translate("***************************************************************************\nCleanUp() submethod\n***************************************************************************"));
  if (bln_Global_SimulatorMode == 0)
  {
    HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    NIST_DEVICE_CONTROLLERS::TerminateHHSs();
    NIST_DEVICE_CONTROLLERS::TerminateODTC(ODTC);
    if (time_point == 4)
    {
      NIST_DEVICE_CONTROLLERS::TerminateCPAC();
    }
    {
      	HxFan.SetFanSpeed("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"); // SetFanSpeed
    }
  }
  ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
  TipCount::Write2(ML_STAR.MlStar50ulTipWithFilter, "tip_counter_50", ML_STAR);
  TipCount::Write2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, "tip_counter_300", ML_STAR);
  TipCount::Write2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, "tip_counter_1000", ML_STAR);
}

private function Initialize_HHS( variable & var_Local_DeviceID, variable var_Local_Node ) void {
  private dialog customDialog_2;
  private variable loopCounter20;
  private variable bln_Local_HHSInitReturn;
  private variable int_Global_ReturnDialog;
  var_Local_DeviceID = 0;
  MECC::TraceComment(Translate("==================================================================================================================================\nInitialize_HHS Start\n=================================================================================================================================="));
  Trace ("==================================================================================================================================");
  Trace ("Initializing HHS Located at Node:  ", var_Local_Node);
  Trace ("==================================================================================================================================");
  {
    loopCounter20 = 0;
    while (1 == 1)
    {
      loopCounter20 = loopCounter20 + 1;
      HSLHamHeaterShaker::SetSimulation(bln_Global_SimulatorMode);
      bln_Local_HHSInitReturn = HSLHamHeaterShaker::CreateUsbDevice(var_Local_Node, var_Local_DeviceID);
      if (bln_Local_HHSInitReturn != 0)
      {
        MECC::TraceComment(Translate("==================================================================================================================================\nFailed to Initialize HHS\n=================================================================================================================================="));
        HSLHamHeaterShaker::Terminate();
        customDialog_2.InitCustomDialog("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");
        customDialog_2.ShowCustomDialog();
        int_Global_ReturnDialog = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
        if (int_Global_ReturnDialog == 2)
        {
          MECC::TraceComment(Translate("==================================================================================================================================\nMethod Aborted\n=================================================================================================================================="));
          abort;
        }
      }
      else
      {
        break;
      }
    }
  }
  MECC::TraceComment(Translate("==================================================================================================================================\nInitialize_HHS Finish\n=================================================================================================================================="));
}
