global device ML_STAR ("Post-Selection PCR and clean-up.24 samples.lay", "ML_STAR", hslTrue);
global device HxFan ("Post-Selection PCR and clean-up.24 samples.lay", "HxFan", hslTrue);
 namespace _Method { #include "HSLSeqLib.hsl" }
#include "Post-Selection PCR and clean-up.24 samples.res"
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_TruSeqNano_Prep.hs_" }
dialog customDialog_1;
variable use_manual_thermocycler;
variable use_ODTC;
variable is_running_ODTC;
variable thermocycle_str;
sequence disp_seq;
variable loopCounter1;
variable HHS3;
variable SetTempHHS3;
variable var_Global_HHSNode3;
dialog dialogHandle1;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    NIST_TRUSEQNANO_PREP::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    var_Global_HHSNode3 = 3;
    SetTempHHS3 = 20;
    Initialize_HHS(HHS3, var_Global_HHSNode3);
    NIST_TRUSEQNANO_PREP::SetHHSTemperature(HHS3, SetTempHHS3);
    HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
    use_ODTC = 1;
    use_manual_thermocycler = use_ODTC - 1;
    customDialog_1.InitCustomDialog("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");
    customDialog_1.SetCustomDialogProperty( "radioButton2.IsChecked", use_ODTC );
    customDialog_1.SetCustomDialogProperty( "radioButton3.IsChecked", use_manual_thermocycler );
    customDialog_1.ShowCustomDialog();
    use_ODTC = customDialog_1.GetCustomDialogProperty( "radioButton2.IsChecked" );
    use_manual_thermocycler = customDialog_1.GetCustomDialogProperty( "radioButton3.IsChecked" );
    if (use_manual_thermocycler == 1)
    {
      is_running_ODTC = 0;
      thermocycle_str = Translate("Use manual termocycler");
    }
    else
    {
      thermocycle_str = Translate("Use automated ODTC");
    }
    if (use_ODTC == 1)
    {
      SeqCopySequence(disp_seq, ML_STAR.PCR_Plate_1);
    }
    else
    {
      SeqCopySequence(disp_seq, ML_STAR.PCR_Plate_manual_1);
    }
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    {
      loopCounter1 = 0;
      disp_seq.SetCurrentPosition(1);
      ML_STAR.DI_Water.SetCurrentPosition(1);
      while (
         (disp_seq.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, disp_seq, 1, ML_STAR.DI_Water, 1);
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (
           (disp_seq.GetCurrentPosition() > 0 && disp_seq.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      disp_seq.SetMax(disp_seq.GetTotal());
      ML_STAR.DI_Water.SetMax(ML_STAR.DI_Water.GetTotal());
      disp_seq.SetCurrentPosition(1);
      ML_STAR.DI_Water.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    dialogHandle1.SetOutput(Translate("pause"));
    dialogHandle1.ShowOutput(Translate("pause"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    {
      loopCounter1 = 0;
      ML_STAR.Midi_on_HHS_2.SetCurrentPosition(1);
      disp_seq.SetCurrentPosition(1);
      while (
         (ML_STAR.Midi_on_HHS_2.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Midi_on_HHS_2, 1, disp_seq, 1);
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (
           (ML_STAR.Midi_on_HHS_2.GetCurrentPosition() > 0 && ML_STAR.Midi_on_HHS_2.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Midi_on_HHS_2.SetMax(ML_STAR.Midi_on_HHS_2.GetTotal());
      disp_seq.SetMax(disp_seq.GetTotal());
      ML_STAR.Midi_on_HHS_2.SetCurrentPosition(1);
      disp_seq.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    NIST_TRUSEQNANO_PREP::_ExitLibrary();
  } }
