 namespace _Method { #include "Common\\iSWAP-PlateAndLidMovement.hs_" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_Device_Controllers.hs_" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_TruSeqNano_Prep.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "STAR Tools\\STAR Tip Tools.hs_" }
#include "Post-Selection PCR and clean-up.24 samples.res"
global device ML_STAR ("Post-Selection PCR and clean-up.24 samples.lay", "ML_STAR", hslTrue);
global device HxFan ("Post-Selection PCR and clean-up.24 samples.lay", "HxFan", hslTrue);
variable loopCounter8;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ISWAP_PLATEANDLIDMOVEMENT::_InitLibrary();
    NIST_DEVICE_CONTROLLERS::_InitLibrary();
    NIST_TRUSEQNANO_PREP::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    STAR_TIP_TOOLS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    StartUp();
    {
      for(loopCounter8 = 0; loopCounter8 < 2;)
      {
        loopCounter8 = loopCounter8 + 1;
        TipPickupWithErrorHandling(ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
    {
      for(loopCounter8 = 0; loopCounter8 < 2;)
      {
        loopCounter8 = loopCounter8 + 1;
        TipPickupWithErrorHandling(ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
    {
      for(loopCounter8 = 0; loopCounter8 < 2;)
      {
        loopCounter8 = loopCounter8 + 1;
        TipPickupWithErrorHandling(ML_STAR.MlStar50ulTipWithFilter);
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
    CleanUp();
    ISWAP_PLATEANDLIDMOVEMENT::_ExitLibrary();
    NIST_DEVICE_CONTROLLERS::_ExitLibrary();
    NIST_TRUSEQNANO_PREP::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    STAR_TIP_TOOLS::_ExitLibrary();
  } }
