private function CleanUp(  ) void ;
private function ErrorHandling_TipPickup( sequence & seq_TipsToUse ) void ;
private function Get_Tip_Use_Str( sequence & in_seq ) variable ;
private function StartUp(  ) void ;
private function TipPickupWithErrorHandling( sequence & seq_tipsForPickup ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function CleanUp(  ) void {
  MECC::TraceComment(Translate("***************************************************************************\nCleanUp() submethod\n***************************************************************************"));
  TipCount::Write2(ML_STAR.MlStar50ulTipWithFilter, "tip_counter_50", ML_STAR);
  TipCount::Write2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, "tip_counter_300", ML_STAR);
  TipCount::Write2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, "tip_counter_1000", ML_STAR);
}

private function StartUp(  ) void {
  MECC::TraceComment(Translate("***************************************************************************\nStartUp() submethod\n***************************************************************************"));
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  TipCount::Edit2(ML_STAR.MlStar50ulTipWithFilter, "tip_counter_50", ML_STAR, 300);
  TipCount::Edit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, "tip_counter_300", ML_STAR, 300);
  TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, "tip_counter_1000", ML_STAR, 300);
}

private function ErrorHandling_TipPickup( sequence & seq_TipsToUse ) void {
  private dialog dialogHandle_1;
  private dialog customDialog_2;
  private variable ret_AbortMethod;
  private variable var_DialogBoxString;
  private variable loopCounter_ChannelsNoTips;
  private variable ret_ReloadTips;
  private variable channelIndex;
  private variable flag_SkipToNextTipRack;
  private variable var_TipSequenceCurrentPosition;
  private variable var_NumberChannelsWithNoTips;
  private variable var_PickupPattern;
  private variable var_NoTipChannelString;
  private variable var_NumberTipsRemaining;
  private variable firmwareReturn;
  private variable var_Channel;
  private variable isTipPresent;
  private variable var_TipPickupPattern;
  private variable ret_RetryNextTipRack;
  private variable var_TipSequenceEndPosition;
  private variable Tip_Counter;
  private variable SimOn;
  private variable firmwareCommand;
  private variable arr_ChannelsNoTip[];
  private variable int_tip_type;
  private variable str_tip_type;
  private variable int_tips_picked_up;
  private variable loopCounter8;
  private dialog customDialog_3;
  MECC::TraceComment(Translate("START TIP PICKUP ERROR HANDLING"));
  SimOn = HSLML_STAR::IsSimulatorMode(ML_STAR);
  if (SimOn == 0)
  {
    STAR_TIP_TOOLS::GetTipType(ML_STAR, seq_TipsToUse, int_tip_type);
    if (int_tip_type == 23)
    {
      Tip_Counter = "tip_counter_50";
      str_tip_type = "50 uL tips";
    }
    if (int_tip_type == 1)
    {
      Tip_Counter = "tip_counter_300";
      str_tip_type = "300 uL tips";
    }
    if (int_tip_type == 5)
    {
      Tip_Counter = "tip_counter_1000";
      str_tip_type = "1000 uL tips";
    }
    var_PickupPattern = Translate("");
    arr_ChannelsNoTip.SetSize(0);
    {
      for(channelIndex = 0; channelIndex < 8;)
      {
        channelIndex = channelIndex + 1;
        firmwareCommand = StrConcat4(Translate("P"), channelIndex, Translate("RW"), Translate(""));
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          	firmwareReturn = arrRetValues[3];
        }
        isTipPresent = StrMid(firmwareReturn, 5, 1);
        if (isTipPresent == "1")
        {
          var_TipPickupPattern = Translate("0");
        }
        else
        {
          var_TipPickupPattern = Translate("1");
          arr_ChannelsNoTip.AddAsLast(channelIndex);
        }
        var_PickupPattern = var_PickupPattern + var_TipPickupPattern;
      }
    }
    var_NumberChannelsWithNoTips=arr_ChannelsNoTip.GetSize();
    var_NoTipChannelString = Translate("");
    {
      for(loopCounter_ChannelsNoTips = 0; loopCounter_ChannelsNoTips < var_NumberChannelsWithNoTips;)
      {
        loopCounter_ChannelsNoTips = loopCounter_ChannelsNoTips + 1;
        var_Channel=arr_ChannelsNoTip.GetAt(loopCounter_ChannelsNoTips-1);
        var_Channel = StrIStr(var_Channel);
        if (loopCounter_ChannelsNoTips != 1)
        {
          var_Channel = StrConcat2(Translate(", "), var_Channel);
        }
        var_NoTipChannelString = var_NoTipChannelString + var_Channel;
      }
    }
    var_TipSequenceCurrentPosition = seq_TipsToUse.GetCurrentPosition();
    var_TipSequenceEndPosition = seq_TipsToUse.GetCount();
    var_NumberTipsRemaining = var_TipSequenceEndPosition - var_TipSequenceCurrentPosition;
    var_NumberTipsRemaining = var_NumberTipsRemaining + 1;
    flag_SkipToNextTipRack = 1;
    if (var_NumberTipsRemaining <= 96)
    {
      flag_SkipToNextTipRack = 0;
    }
    var_DialogBoxString = StrConcat4(Translate("Channel(s) "), var_NoTipChannelString, Translate(" were not able to pick up the requested "), str_tip_type);
    customDialog_2.InitCustomDialog("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");
    customDialog_2.SetCustomDialogProperty( "radioButton2.IsEnabled", flag_SkipToNextTipRack );
    customDialog_2.SetCustomDialogProperty( "textBlock1.Text", var_DialogBoxString );
    customDialog_2.ShowCustomDialog();
    ret_AbortMethod = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
    ret_ReloadTips = customDialog_2.GetCustomDialogProperty( "radioButton1.IsChecked" );
    ret_RetryNextTipRack = customDialog_2.GetCustomDialogProperty( "radioButton2.IsChecked" );
    if (ret_AbortMethod == 2)
    {
      abort;
    }
    if (ret_ReloadTips == 1)
    {
      int_tips_picked_up = 0;
      {
        loopCounter8 = 0;
        while (int_tips_picked_up == 0)
        {
          loopCounter8 = loopCounter8 + 1;
          PTL::ResetUnloadingStateAndSequences();
          PTL::SetUnloadingState("UserResponseTime", 0);
          PTL::SetUnloadingState("ErrorHandling", 3);
          PTL::SetUnloadingSize(1);
          PTL::SetUnloadingSequence(0, seq_TipsToUse, hslFalse, "");
          if( 0 == PTL::Unload(ML_STAR) )
          {
                PTL::RaiseRuntimeError(-1540095744, PTL::IDS::smartStepUnload, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
          PTL::GetUnloadingSequence(0, seq_TipsToUse);
          customDialog_3.InitCustomDialog("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");
          customDialog_3.ShowCustomDialog();
          PTL::ResetLoadingStateAndSequences();
          PTL::SetLoadingState("UserResponseTime", hslInfinite);
          PTL::SetLoadingState("ErrorHandling", 5);
          PTL::SetLoadingState("InitializeCustomStepID", 0);
          PTL::SetLoadingState("LoadCarrierCustomStepID", 12);
          PTL::SetLoadingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetLoadingState("CalibrateCarrierChannel", -1);
          PTL::SetLoadingSize(1);
          PTL::SetLoadingSequence(0, seq_TipsToUse, 1, -10, hslTrue, hslTrue, Tip_Counter);
          if( 0 == PTL::Load(ML_STAR, hslTrue) )
          {
                PTL::RaiseRuntimeError(-1556872960, PTL::IDS::smartStepLoad, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
          PTL::GetLoadingSequence(0, seq_TipsToUse);
          ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
          onerror goto errLabel_4 ;
          err.Clear();
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          int_tips_picked_up = 1;
          errLabel_4 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
          }   /* end if from skip handler if no error */
        }
      }
    }
    if (ret_RetryNextTipRack == 1)
    {
      if (var_TipSequenceCurrentPosition <= 96)
      {
        seq_TipsToUse.SetCurrentPosition(97);
      }
      else
      {
        if (var_TipSequenceCurrentPosition <= 192)
        {
          seq_TipsToUse.SetCurrentPosition(193);
        }
        else
        {
          if (var_TipSequenceCurrentPosition <= 288)
          {
            seq_TipsToUse.SetCurrentPosition(289);
          }
          else
          {
            if (var_TipSequenceCurrentPosition <= 384)
            {
              seq_TipsToUse.SetCurrentPosition(385);
            }
            else
            {
              if (var_TipSequenceCurrentPosition <= 480)
              {
                seq_TipsToUse.SetCurrentPosition(481);
              }
              else
              {
                if (var_TipSequenceCurrentPosition <= 576)
                {
                  seq_TipsToUse.SetCurrentPosition(577);
                }
                else
                {
                  if (var_TipSequenceCurrentPosition <= 672)
                  {
                    seq_TipsToUse.SetCurrentPosition(673);
                  }
                  else
                  {
                    if (var_TipSequenceCurrentPosition <= 768)
                    {
                      seq_TipsToUse.SetCurrentPosition(769);
                    }
                    else
                    {
                      if (var_TipSequenceCurrentPosition <= 864)
                      {
                        seq_TipsToUse.SetCurrentPosition(865);
                      }
                    }
                  }
                }
              }
            }
          }
        }
      }
      onerror goto errLabel_5 ;
      err.Clear();
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      errLabel_5 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        dialogHandle_1.SetOutput(Translate("The instrument is still having trouble picking up tips."), Translate("\n\nThe method will now abort."), Translate("\n\nIf this issue persists, please contact Hamilton Service."));
        dialogHandle_1.ShowOutput(Translate("Error Picking Up Tips"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        abort;
      }   /* end if from skip handler if no error */
    }
  }
  MECC::TraceComment(Translate("END TIP PICKUP ERROR HANDLING"));
}

private function TipPickupWithErrorHandling( sequence & seq_tipsForPickup ) void {
  private variable str_tip_pattern;
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  TipPickupWithErrorHandling <<<<<<<<<<"));
  str_tip_pattern = "11111111";
  onerror goto errLabel_6 ;
  err.Clear();
  STAR_TIP_TOOLS::TipCheck(ML_STAR, seq_tipsForPickup, Translate("tip_counter_1000"), 8);
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  errLabel_6 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    ErrorHandling_TipPickup(seq_tipsForPickup);
  }   /* end if from skip handler if no error */
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  TipPickupWithErrorHandling <<<<<<<<<<"));
}

private function Get_Tip_Use_Str( sequence & in_seq ) variable {
  private variable num_of_tips_needed;
  private variable tip_str;
  num_of_tips_needed = SeqGetTotal(in_seq);
  tip_str = "11111111";
  if (num_of_tips_needed == 2)
  {
    tip_str = "11000000";
  }
  if (num_of_tips_needed == 4)
  {
    tip_str = "11110000";
  }
  if (num_of_tips_needed == 6)
  {
    tip_str = "00111111";
  }
  return (tip_str);
}
