 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
 namespace _Method { #include "HSLExtensions\\Directory.hsl" }
 namespace _Method { #include "HSLTimLib.hsl" }
 namespace _Method { #include "GSF-IMS Project\\GSF-IMS.shared_submethods.hs_" }
#include "growth_curves_N_variants.res"
 namespace _Method { #include "HSLErrLib.hsl" }
variable worklist_file_path;
variable strain_1_id;
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable culture_volume;
variable is_debugging;
dialog dialogHandle_1;
variable dilution_factor;
variable cell_volume;
variable media_volume;
variable media_1_id;
variable plasmid_id_arr[];
global device ML_STAR ("growth_curves_N_variants.lay", "ML_STAR", hslTrue);
variable num_variants;
sequence gp_cells_arr[];
variable num_cell_pipette_steps;
variable cell_pipette_counter;
variable load_step_num_str;
variable load_cells_str;
variable plate_number;
dialog dialogHandle_2;
dialog customDialog_3;
variable park_grippers;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("==========================================================================================\nThis method used for preparing plate 1, with just media and bacteria in all the wells, for growth to stationary phase.\n\nIt uses 16 1000 uL tips\n=========================================================================================="));
    GetParams();
    StartUp();
    cell_volume = culture_volume / (dilution_factor * 1.0);
    media_volume = culture_volume - cell_volume;
    gp_cells_arr.SetSize(0);
    gp_cells_arr.AddAsLast(ML_STAR.gp_cells_1);
    gp_cells_arr.AddAsLast(ML_STAR.gp_cells_2);
    gp_cells_arr.AddAsLast(ML_STAR.gp_cells_3);
    gp_cells_arr.AddAsLast(ML_STAR.gp_cells_4);
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_source_lid, ML_STAR.Media_trough_lid_parking, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate.\n=============================================================="));
    if (is_pipetting == "true")
    {
      GSF_IMS_SHARED_SUBMETHODS::tip_pickup(ML_STAR.Tips_1000_Channels, 8, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_pipette_from, ML_STAR.Growth_Plate, media_volume, 1, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::tip_eject(8, ML_STAR);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_1.SetOutput(Translate("media into growth plate"), "\n");
        dialogHandle_1.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    if (plate_number == 1)
    {
      park_grippers = 1;
    }
    else
    {
      park_grippers = 0;
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_trough_lid_parking, ML_STAR.Media_source_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, park_grippers, ML_STAR);
    num_cell_pipette_steps = num_variants / 8;
    if (plate_number == 1)
    {
      MECC::TraceComment(Translate("==============================================================\nPipette cells into growth plate.\n=============================================================="));
      if (is_pipetting == "true")
      {
        load_step_num_str = Translate("");
        {
          for(cell_pipette_counter = 0; cell_pipette_counter < num_cell_pipette_steps;)
          {
            cell_pipette_counter = cell_pipette_counter + 1;
            if (cell_pipette_counter == 1)
            {
              load_step_num_str = Translate("first");
            }
            if (cell_pipette_counter == 2)
            {
              load_step_num_str = Translate("second");
            }
            if (cell_pipette_counter == 3)
            {
              load_step_num_str = Translate("third");
            }
            if (cell_pipette_counter == 4)
            {
              load_step_num_str = Translate("fourth");
            }
            load_cells_str = Translate("Load the ");
            load_cells_str = StrConcat4(Translate("Load the "), load_step_num_str, Translate(" set of 8 cultures in positions 10-17:"), Translate(""));
            customDialog_3.InitCustomDialog("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");
            customDialog_3.SetCustomDialogProperty( "textBlock.Text", load_cells_str );
            customDialog_3.ShowCustomDialog();
            GSF_IMS_SHARED_SUBMETHODS::pipette_cells_from_tubes(ML_STAR.bacteria_stocks_8, gp_cells_arr.ElementAt( cell_pipette_counter -1), cell_volume, 2, 800, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
          }
        }
      }
      else
      {
        if (is_debugging == "true")
        {
          dialogHandle_2.SetOutput(Translate("cells into growth plate"), "\n");
          dialogHandle_2.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        }
      }
    }
    if (plate_number == 1)
    {
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, park_grippers, 0, ML_STAR);
      PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Lid_parking_Old_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    }
    else
    {
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, park_grippers, 1, ML_STAR);
    }
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CalculateOutputs();
    SaveWorklistAndMetadata();
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_ExitLibrary();
  } }
