private function CalculateOutputs(  ) void ;
private function CleanUp(  ) void ;
private function GetParams(  ) void ;
private function SaveWorklistAndMetadata(  ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function CleanUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  MECC::TraceComment(Translate("**** start CleanUp sub-method ****"));
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        TipCount::Write2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        TipCount::Write2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        TipCount::Write2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 4)
      {
        TipCount::Write2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR, ML_STAR.clear_96_head_seq);
  MECC::TraceComment(Translate("**** end CleanUp sub-method ****"));
}

private function StartUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  MECC::TraceComment(Translate("**** start StartUp sub-method ****"));
  TIP_HANDLING_WITH_96_HEAD::GetTipCounters(tip_counter_array, 1);
  tip_seq_arr.SetSize(0);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_300_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_50_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Offset_pickup);
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        TipCount::Read2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        TipCount::Read2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        TipCount::Read2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 4)
      {
        TipCount::Read2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  MECC::TraceComment(Translate("**** end StartUp sub-method ****"));
}

private function CalculateOutputs(  ) void {
  private variable plasmid_repeats;
  private variable repeat_num;
  private variable id_arr_start_index;
  private sequence gp_cell_seq;
  private variable gp_cell_seq_counter;
  private variable plasmid_number;
  private variable plasmid_id;
  private variable well_id;
  private variable labware_id;
  MECC::TraceComment(Translate("**** start CalculateOutputs sub-method ****"));
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, Translate("strain"), strain_1_id);
  plasmid_repeats = 3;
  {
    for(cell_pipette_counter = 0; cell_pipette_counter < num_cell_pipette_steps;)
    {
      cell_pipette_counter = cell_pipette_counter + 1;
      id_arr_start_index = cell_pipette_counter * 8;
      id_arr_start_index = id_arr_start_index - 8;
      SeqCopySequence(gp_cell_seq, gp_cells_arr.ElementAt( cell_pipette_counter -1));
      gp_cell_seq.SetCurrentPosition(1);
      {
        for(repeat_num = 0; repeat_num < plasmid_repeats;)
        {
          repeat_num = repeat_num + 1;
          {
            for(gp_cell_seq_counter = 0; gp_cell_seq_counter < 8;)
            {
              gp_cell_seq_counter = gp_cell_seq_counter + 1;
              plasmid_number = id_arr_start_index + gp_cell_seq_counter;
              plasmid_id=plasmid_id_arr.GetAt(plasmid_number-1);
              TrcTrace(Translate("plasmid_id: "), plasmid_id);
              labware_id = SeqGetLabwareId(gp_cell_seq);
              well_id = SeqGetPositionId(gp_cell_seq);
              TrcTrace(Translate("well_id: "), well_id);
              LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, Translate("plasmid"), plasmid_id);
              SeqIncrement(gp_cell_seq, 1);
            }
          }
        }
      }
    }
  }
  MECC::TraceComment(Translate("**** end CalculateOutputs sub-method ****"));
}

private function SaveWorklistAndMetadata(  ) void {
  private variable row_id;
  private variable well_id;
  private variable plasmid;
  private variable strain;
  private variable position;
  private variable column_id;
  private variable column_id_str;
  private file file1;
  private variable iniFilePath;
  private variable iniDir;
  private variable iniExists;
  private variable loopCounter2;
  MECC::TraceComment(Translate("**** start SaveWorklistAndMetadata sub-method ****"));
  file1.AddField("position", position, hslInteger);
  file1.AddField("well", well_id, hslString, 255);
  file1.AddField("row", row_id, hslString, 255);
  file1.AddField("column", column_id, hslInteger);
  file1.AddField("media", media_1_id, hslString, 255);
  file1.AddField("strain", strain, hslString, 255);
  file1.AddField("plasmid", plasmid, hslString, 255);
  file1.SetDelimiter(hslCSVDelimited);
  if( 0 == file1.Open(worklist_file_path, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, worklist_file_path, "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    ML_STAR.Growth_Plate.SetCurrentPosition(1);
    while (
       (ML_STAR.Growth_Plate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.Growth_Plate, 1);
      loopCounter2 = loopCounter2 + 1;
      position = ML_STAR.Growth_Plate.GetCurrentPosition();
      well_id = SeqGetPositionId(ML_STAR.Growth_Plate);
      row_id = StrLeft(well_id, 1);
      column_id_str = StrMid(well_id, 1, 2);
      column_id = StrIVal(column_id_str);
      strain = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("strain"));
      plasmid = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("plasmid"));
      if( 0 == file1.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      SeqIncrement(ML_STAR.Growth_Plate, 1);
      if (
         (ML_STAR.Growth_Plate.GetCurrentPosition() > 0 && ML_STAR.Growth_Plate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.Growth_Plate.SetMax(ML_STAR.Growth_Plate.GetTotal());
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  iniDir = HSLExtensions::File::GetDirectoryName(worklist_file_path);
  iniFilePath = iniDir + "\\schema.ini";
  iniExists = HSLExtensions::File::Exists(iniFilePath);
  if (iniExists == 1)
  {
    HSLExtensions::File::Delete(iniFilePath);
  }
  MECC::TraceComment(Translate("**** end SaveWorklistAndMetadata sub-method ****"));
}

private function GetParams(  ) void {
  private variable param_dict;
  private variable read_line;
  private file file1;
  private variable split_line[];
  private variable loopCounter2;
  private variable culture_volume_str;
  private variable dilution_factor_str;
  private variable loc;
  private variable plasmid_num;
  private variable plasmid_id;
  private variable plasmid_key;
  private variable num_variants_str;
  private variable raise_num_variants_err;
  private variable err_str;
  private variable plate_number_str;
  MECC::TraceComment(Translate("**** start GetParams sub-method ****"));
  param_dict = "param_dict";
  HSLExtensions::Dictionary::CreateDictionary(param_dict, 2);
  file1.AddField(1, read_line, hslString);
  file1.SetDelimiter(hslAsciiText);
  if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    while (
       (file1.Eof() == 0)
    )
    {
      loopCounter2 = loopCounter2 + 1;
      if( 0 == file1.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      loc = StrFind(read_line, ",");
      if (loc > 0)
      {
        split_line = HSLExtensions::String::Split(read_line, Translate(","), 1);
        HSLExtensions::Dictionary::AddItem(param_dict, split_line.ElementAt( 1 -1), split_line.ElementAt( 2 -1));
      }
    }
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  worklist_file_path = HSLExtensions::Dictionary::GetItem(param_dict, Translate("worklistFile"));
  num_variants_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("num_variants"));
  num_variants = StrIVal(num_variants_str);
  raise_num_variants_err = 1;
  if (num_variants == 8)
  {
    raise_num_variants_err = 0;
  }
  if (num_variants == 16)
  {
    raise_num_variants_err = 0;
  }
  if (num_variants == 24)
  {
    raise_num_variants_err = 0;
  }
  if (num_variants == 32)
  {
    raise_num_variants_err = 0;
  }
  if (raise_num_variants_err == 1)
  {
    err_str = Translate("Error in GetParams sub-method: ");
    err_str = StrConcat4(err_str, Translate("The number of variants ("), num_variants_str, Translate(") "));
    err_str = StrConcat4(err_str, Translate("muist be either 8, 16, 24, or 32."), Translate(""), Translate(""));
    ErrRaise(1, err_str);
  }
  strain_1_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("strain1"));
  plasmid_id_arr.SetSize(0);
  TrcTrace4(Translate("****    "), Translate("num_variants"), Translate(": "), num_variants);
  {
    for(plasmid_num = 0; plasmid_num < num_variants;)
    {
      plasmid_num = plasmid_num + 1;
      plasmid_key = StrConcat2(Translate("hamilton_plasmid_"), plasmid_num);
      plasmid_id = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), plasmid_key);
      plasmid_id_arr.AddAsLast(plasmid_id);
      TrcTrace4(Translate("****    "), plasmid_key, Translate(": "), plasmid_id);
    }
  }
  media_1_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("media_1"));
  is_pipetting = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isPipetting"));
  is_debugging = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isDebugging"));
  culture_volume_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("cultureVolume"));
  culture_volume = StrFVal(culture_volume_str);
  if (culture_volume > 500)
  {
    culture_volume = 500;
  }
  else
  {
    if (culture_volume < 200)
    {
      culture_volume = 200;
    }
  }
  plate_number_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("plateNum"));
  plate_number = StrFVal(plate_number_str);
  dilution_factor_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("dilutionFactor"));
  dilution_factor = StrFVal(dilution_factor_str);
  MECC::TraceComment(Translate("**** end GetParams sub-method ****"));
}
