#pragma once
#include "STAR Tools\\STAR Tip Tools.hs_"
#include "..\\HSLTrcLib.hsl"
#include "HSLErrLib.hsl"
#include "HSLSeqLib.hsl"
#include "HSLStrLib.hsl"
#include "Common\\LMSF_Utilities.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace GSF_IMS_SHARED_SUBMETHODS {
  variable channel_pattern;
  function add_reagent_replace_tips( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable mix_cycles, variable mix_volume, sequence & tips, variable number_channels, device & STAR ) void ;
  function add_reagent_reuse_tips( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable pre_wet_tips, variable pickup_and_eject_tips, sequence & tips, variable number_channels, device & STAR ) void ;
  function add_reagents_reuse_tips_vol_arr( sequence & asp_seq, sequence & disp_seq, variable & p_vol_arr[], variable pre_wet_tips, variable pickup_and_eject_tips, sequence & tips, variable number_channels, device & STAR ) void ;
  function aspirate_w_err_handling( sequence & asp_seq, variable asp_seq_counting, variable & p_vol_arr[], sequence tips, variable number_channels, device & STAR ) void ;
  private function check_p_vol_arr_disp_seq( variable vol_arr_length, variable number_channels, sequence disp_seq ) void ;
  private function check_same_seq_lengths( sequence & asp_seq, sequence & disp_seq ) void ;
  private function check_seq_lengths_and_channels( sequence & asp_seq, sequence & disp_seq, variable number_channels ) void ;
  private function check_vol_arr_length( variable & p_vol_arr[], variable number_channels ) void ;
  function dispense_w_err_handling( sequence & disp_seq, variable disp_seq_counting, variable disp_to_liquid, variable & p_vol_arr[], variable mix_cycles, variable mix_volume, variable number_channels, device & STAR ) void ;
  function pipette_cells_from_tubes( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable mix_cycles, variable mix_volume, sequence & tips, variable number_channels, device & STAR ) void ;
  function pipette_dil_series( sequence & from_seq, sequence & to_seq, variable p_vol, variable mix_cycles, variable mix_volume, sequence & tips, variable number_channels, device & STAR ) void ;
  function pipette_media( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable pre_wet_tips, sequence & tips, variable number_channels, device & STAR ) void ;
  function pipette_media_volume_arr( sequence & asp_seq, sequence & disp_seq, variable & p_vol_arr[], variable pre_wet_tips, sequence & tips, variable number_channels, device & STAR ) void ;
  private function set_channel_pattern( variable number_channels ) void ;
  function simple_aspirate( sequence & asp_seq, variable asp_seq_counting, variable p_vol, sequence tips, variable number_channels, device & STAR ) void ;
  function simple_dispense( sequence & disp_seq, variable disp_seq_counting, variable disp_to_liquid, variable p_vol, variable mix_cycles, variable mix_volume, variable number_channels, device & STAR ) void ;
  function tip_eject( variable number_channels, device & STAR ) void ;
  function tip_pickup( sequence & tips, variable number_channels, device & STAR ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    STAR_TIP_TOOLS::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
  }
  function _ExitLibrary() {
    STAR_TIP_TOOLS::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
  }

  function pipette_media( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable pre_wet_tips, sequence & tips, variable number_channels, device & STAR ) void {
    private variable pipette_loop;
    MECC::TraceComment(Translate("**** start pipette_media shared sub-method ****"));
    TrcTrace(Translate("p_vol: "), p_vol);
    check_seq_lengths_and_channels(asp_seq, disp_seq, number_channels);
    if (pre_wet_tips == 1)
    {
      simple_aspirate(asp_seq, 0, p_vol, tips, number_channels, STAR);
      simple_dispense(asp_seq, 0, 1, p_vol, 0, 0, number_channels, STAR);
    }
    {
      pipette_loop = 0;
      disp_seq.SetCurrentPosition(1);
      while (
         (disp_seq.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, disp_seq, 1);
        pipette_loop = pipette_loop + 1;
        simple_aspirate(asp_seq, 0, p_vol, tips, number_channels, STAR);
        simple_dispense(disp_seq, 1, 0, p_vol, 0, 0, number_channels, STAR);
        if (
           (disp_seq.GetCurrentPosition() > 0 && disp_seq.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      disp_seq.SetMax(disp_seq.GetTotal());
      disp_seq.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("**** end pipette_media shard sub-method ****"));
  }

  function pipette_dil_series( sequence & from_seq, sequence & to_seq, variable p_vol, variable mix_cycles, variable mix_volume, sequence & tips, variable number_channels, device & STAR ) void {
    private variable pipette_counter;
    MECC::TraceComment(Translate("**** start pipette_dil_series shared sub-method ****"));
    TrcTrace(Translate("p_vol: "), p_vol);
    check_same_seq_lengths(from_seq, to_seq);
    tip_pickup(tips, number_channels, STAR);
    {
      pipette_counter = 0;
      from_seq.SetCurrentPosition(1);
      to_seq.SetCurrentPosition(1);
      while (
         (from_seq.GetCurrentPosition() > 0)
      && (to_seq.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, from_seq, 1, to_seq, 1);
        pipette_counter = pipette_counter + 1;
        STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        simple_dispense(to_seq, 1, 1, p_vol, 0, 0, number_channels, STAR);
        if (
           (from_seq.GetCurrentPosition() > 0 && from_seq.GetMax() == 0 )
        && (to_seq.GetCurrentPosition() > 0 && to_seq.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      from_seq.SetMax(from_seq.GetTotal());
      to_seq.SetMax(to_seq.GetTotal());
      from_seq.SetCurrentPosition(1);
      to_seq.SetCurrentPosition(1);
    }
    tip_eject(number_channels, STAR);
    MECC::TraceComment(Translate("**** end pipette_dil_series shard sub-method ****"));
  }

  function tip_pickup( sequence & tips, variable number_channels, device & STAR ) void {
    set_channel_pattern(number_channels);
    STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  }

  private function set_channel_pattern( variable number_channels ) void {
    private variable channel_pattern_2;
    private variable channel_pattern_3;
    private variable channel_pattern_4;
    private variable channel_pattern_6;
    private variable channel_pattern_7;
    private variable channel_pattern_8;
    private variable channel_pattern_1;
    private variable channel_pattern_5;
    private variable chann_patt_arr[];
    channel_pattern_1 = "10000000";
    channel_pattern_2 = "11000000";
    channel_pattern_3 = "11100000";
    channel_pattern_4 = "11110000";
    channel_pattern_5 = "11111000";
    channel_pattern_6 = "11111100";
    channel_pattern_7 = "11111110";
    channel_pattern_8 = "11111111";
    chann_patt_arr.SetSize(0);
    chann_patt_arr.AddAsLast(channel_pattern_1);
    chann_patt_arr.AddAsLast(channel_pattern_2);
    chann_patt_arr.AddAsLast(channel_pattern_3);
    chann_patt_arr.AddAsLast(channel_pattern_4);
    chann_patt_arr.AddAsLast(channel_pattern_5);
    chann_patt_arr.AddAsLast(channel_pattern_6);
    chann_patt_arr.AddAsLast(channel_pattern_7);
    chann_patt_arr.AddAsLast(channel_pattern_8);
    channel_pattern=chann_patt_arr.GetAt(number_channels-1);
  }

  function tip_eject( variable number_channels, device & STAR ) void {
    set_channel_pattern(number_channels);
    STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }

  function pipette_cells_from_tubes( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable mix_cycles, variable mix_volume, sequence & tips, variable number_channels, device & STAR ) void {
    private variable loopCounter1;
    private variable asp_seq_length;
    private variable disp_seq_length;
    private variable err_str;
    private variable asp_len_str;
    private variable chan_len_str;
    private variable int_mod;
    private variable disp_len_str;
    MECC::TraceComment(Translate("**** start pipette_cells_from_tubes shared sub-method ****"));
    TrcTrace(Translate("p_vol: "), p_vol);
    check_seq_lengths_and_channels(asp_seq, disp_seq, number_channels);
    asp_seq_length = SeqGetTotal(asp_seq);
    if (asp_seq_length != number_channels)
    {
      err_str = Translate("Error in pipette_cells_from_tubes sub-method: ");
      asp_len_str = StrIStr(asp_seq_length);
      err_str = StrConcat4(err_str, Translate("The number of positions in asp_seq ("), asp_len_str, Translate(") "));
      chan_len_str = StrIStr(number_channels);
      err_str = StrConcat4(err_str, Translate("is not equal to the number of pipetting channels used ("), chan_len_str, Translate(") "));
      ErrRaise(1, err_str);
    }
    disp_seq_length = SeqGetTotal(disp_seq);
    int_mod = LMSF_UTILITIES::Modulo(disp_seq_length, asp_seq_length);
    if (int_mod != 0)
    {
      err_str = Translate("Error in pipette_cells_from_tubes sub-method: ");
      disp_len_str = StrIStr(disp_seq_length);
      err_str = StrConcat4(err_str, Translate("The number of positions in disp_seq ("), disp_len_str, Translate(") "));
      chan_len_str = StrIStr(number_channels);
      err_str = StrConcat4(err_str, Translate("is not an integer multiple of the number of pipetting channels used ("), chan_len_str, Translate(") "));
      ErrRaise(1, err_str);
    }
    tip_pickup(tips, number_channels, STAR);
    {
      loopCounter1 = 0;
      disp_seq.SetCurrentPosition(1);
      while (
         (disp_seq.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, disp_seq, 1);
        loopCounter1 = loopCounter1 + 1;
        STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        simple_dispense(disp_seq, 1, 1, p_vol, 0, 0, number_channels, STAR);
        if (
           (disp_seq.GetCurrentPosition() > 0 && disp_seq.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      disp_seq.SetMax(disp_seq.GetTotal());
      disp_seq.SetCurrentPosition(1);
    }
    tip_eject(number_channels, STAR);
    MECC::TraceComment(Translate("**** end pipette_cells_from_tubes shard sub-method ****"));
  }

  function add_reagent_reuse_tips( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable pre_wet_tips, variable pickup_and_eject_tips, sequence & tips, variable number_channels, device & STAR ) void {
    private variable pipette_loop;
    MECC::TraceComment(Translate("**** start add_reagent_reuse_tips shared sub-method ****"));
    TrcTrace(Translate("p_vol: "), p_vol);
    check_seq_lengths_and_channels(asp_seq, disp_seq, number_channels);
    if (pickup_and_eject_tips == 1)
    {
      tip_pickup(tips, number_channels, STAR);
    }
    if (pre_wet_tips == 1)
    {
      simple_aspirate(asp_seq, 0, p_vol, tips, number_channels, STAR);
      simple_dispense(asp_seq, 0, 1, p_vol, 0, 0, number_channels, STAR);
    }
    {
      pipette_loop = 0;
      disp_seq.SetCurrentPosition(1);
      while (
         (disp_seq.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, disp_seq, 1);
        pipette_loop = pipette_loop + 1;
        simple_aspirate(asp_seq, 0, p_vol, tips, number_channels, STAR);
        simple_dispense(disp_seq, 1, 1, p_vol, 0, 0, number_channels, STAR);
        if (
           (disp_seq.GetCurrentPosition() > 0 && disp_seq.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      disp_seq.SetMax(disp_seq.GetTotal());
      disp_seq.SetCurrentPosition(1);
    }
    if (pickup_and_eject_tips == 1)
    {
      tip_eject(number_channels, STAR);
    }
    MECC::TraceComment(Translate("**** end add_reagent_reuse_tips shard sub-method ****"));
  }

  function add_reagent_replace_tips( sequence & asp_seq, sequence & disp_seq, variable p_vol, variable mix_cycles, variable mix_volume, sequence & tips, variable number_channels, device & STAR ) void {
    private variable pipette_loop;
    MECC::TraceComment(Translate("**** start add_reagent_replace_tips shared sub-method ****"));
    TrcTrace(Translate("p_vol: "), p_vol);
    check_seq_lengths_and_channels(asp_seq, disp_seq, number_channels);
    {
      pipette_loop = 0;
      disp_seq.SetCurrentPosition(1);
      while (
         (disp_seq.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, disp_seq, 1);
        pipette_loop = pipette_loop + 1;
        tip_pickup(tips, number_channels, STAR);
        simple_aspirate(asp_seq, 0, p_vol, tips, number_channels, STAR);
        simple_dispense(disp_seq, 1, 1, p_vol, mix_cycles, mix_volume, number_channels, STAR);
        tip_eject(number_channels, STAR);
        if (
           (disp_seq.GetCurrentPosition() > 0 && disp_seq.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      disp_seq.SetMax(disp_seq.GetTotal());
      disp_seq.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("**** end add_reagent_replace_tips shard sub-method ****"));
  }

  function aspirate_w_err_handling( sequence & asp_seq, variable asp_seq_counting, variable & p_vol_arr[], sequence tips, variable number_channels, device & STAR ) void {
    private variable int_tip_type;
    private variable liquid_class;
    set_channel_pattern(number_channels);
    STAR_TIP_TOOLS::GetTipType(STAR, tips, int_tip_type);
    if (int_tip_type == 1)
    {
      liquid_class = "StandardVolumeFilter_Water_FastMixing_DispenseSurface_Empty";
    }
    else
    {
      if (int_tip_type == 5)
      {
        liquid_class = "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty";
      }
    }
    STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  }

  function dispense_w_err_handling( sequence & disp_seq, variable disp_seq_counting, variable disp_to_liquid, variable & p_vol_arr[], variable mix_cycles, variable mix_volume, variable number_channels, device & STAR ) void {
    set_channel_pattern(number_channels);
    if (disp_to_liquid == 1)
    {
      STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    }
    else
    {
      STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    }
  }

  function simple_aspirate( sequence & asp_seq, variable asp_seq_counting, variable p_vol, sequence tips, variable number_channels, device & STAR ) void {
    private variable p_vol_arr[];
    private variable chann_loop;
    p_vol_arr.SetSize(0);
    {
      for(chann_loop = 0; chann_loop < 8;)
      {
        chann_loop = chann_loop + 1;
        if (chann_loop <= number_channels)
        {
          p_vol_arr.AddAsLast(p_vol);
        }
        else
        {
          p_vol_arr.AddAsLast(0);
        }
      }
    }
    aspirate_w_err_handling(asp_seq, asp_seq_counting, p_vol_arr, tips, number_channels, STAR);
  }

  function simple_dispense( sequence & disp_seq, variable disp_seq_counting, variable disp_to_liquid, variable p_vol, variable mix_cycles, variable mix_volume, variable number_channels, device & STAR ) void {
    private variable chann_loop;
    private variable p_vol_arr[];
    p_vol_arr.SetSize(0);
    {
      for(chann_loop = 0; chann_loop < 8;)
      {
        chann_loop = chann_loop + 1;
        if (chann_loop <= number_channels)
        {
          p_vol_arr.AddAsLast(p_vol);
        }
        else
        {
          p_vol_arr.AddAsLast(0);
        }
      }
    }
    dispense_w_err_handling(disp_seq, disp_seq_counting, disp_to_liquid, p_vol_arr, mix_cycles, mix_volume, number_channels, STAR);
  }

  private function check_seq_lengths_and_channels( sequence & asp_seq, sequence & disp_seq, variable number_channels ) void {
    private variable disp_len_str;
    private variable disp_seq_length;
    private variable err_str;
    private variable chan_len_str;
    private variable asp_len_str;
    private variable asp_seq_length;
    private variable int_mod;
    asp_seq_length = SeqGetTotal(asp_seq);
    if (asp_seq_length != number_channels)
    {
      err_str = Translate("Error in shared sub-method: ");
      asp_len_str = StrIStr(asp_seq_length);
      err_str = StrConcat4(err_str, Translate("The number of positions in asp_seq ("), asp_len_str, Translate(") "));
      chan_len_str = StrIStr(number_channels);
      err_str = StrConcat4(err_str, Translate("is not equal to the number of pipetting channels used ("), chan_len_str, Translate(") "));
      ErrRaise(1, err_str);
    }
    disp_seq_length = SeqGetTotal(disp_seq);
    int_mod = LMSF_UTILITIES::Modulo(disp_seq_length, asp_seq_length);
    if (int_mod != 0)
    {
      err_str = Translate("Error in pipette_cells_from_tubes sub-method: ");
      disp_len_str = StrIStr(disp_seq_length);
      err_str = StrConcat4(err_str, Translate("The number of positions in disp_seq ("), disp_len_str, Translate(") "));
      chan_len_str = StrIStr(number_channels);
      err_str = StrConcat4(err_str, Translate("is not an integer multiple of the number of pipetting channels used ("), chan_len_str, Translate(") "));
      ErrRaise(1, err_str);
    }
  }

  private function check_same_seq_lengths( sequence & asp_seq, sequence & disp_seq ) void {
    private variable disp_len_str;
    private variable err_str;
    private variable disp_seq_length;
    private variable asp_len_str;
    private variable asp_seq_length;
    asp_seq_length = SeqGetTotal(asp_seq);
    disp_seq_length = SeqGetTotal(disp_seq);
    if (asp_seq_length != disp_seq_length)
    {
      err_str = Translate("Error in shared sub-method: ");
      asp_len_str = StrIStr(asp_seq_length);
      disp_len_str = StrIStr(disp_seq_length);
      err_str = StrConcat4(err_str, Translate("The number of positions in asp_seq ("), asp_len_str, Translate(") "));
      err_str = StrConcat4(err_str, Translate("is not equal to the number of positions in disp_seq ("), disp_len_str, Translate(") "));
      ErrRaise(1, err_str);
    }
  }

  private function check_vol_arr_length( variable & p_vol_arr[], variable number_channels ) void {
    private variable arr_len;
    private variable err_str;
    private variable arr_len_str;
    private variable chan_len_str;
    arr_len=p_vol_arr.GetSize();
    if (arr_len != number_channels)
    {
      err_str = Translate("Error in shared sub-method: ");
      arr_len_str = StrIStr(arr_len);
      chan_len_str = StrIStr(number_channels);
      err_str = StrConcat4(err_str, Translate("The length of the pipetting volume array ("), arr_len_str, Translate(") "));
      err_str = StrConcat4(err_str, Translate("is not equal to the number of pipetting channels used ("), chan_len_str, Translate(") "));
      ErrRaise(1, err_str);
    }
  }

  function pipette_media_volume_arr( sequence & asp_seq, sequence & disp_seq, variable & p_vol_arr[], variable pre_wet_tips, sequence & tips, variable number_channels, device & STAR ) void {
    private variable pipette_loop;
    private variable vol_arr_length;
    private variable loopCounter1;
    private variable p_vol;
    private variable vol_arr_check_size;
    private variable disp_seq_length;
    private variable disp_len_str;
    private variable err_str;
    private variable chan_len_str;
    private variable vol_len_str;
    MECC::TraceComment(Translate("**** start pipette_media_volume_arr shared sub-method ****"));
    vol_arr_length=p_vol_arr.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < vol_arr_length;)
      {
        loopCounter1 = loopCounter1 + 1;
        p_vol=p_vol_arr.GetAt(loopCounter1-1);
        TrcTrace4(Translate("    "), loopCounter1, Translate("    p_vol: "), p_vol);
      }
    }
    check_seq_lengths_and_channels(asp_seq, disp_seq, number_channels);
    check_p_vol_arr_disp_seq(vol_arr_length, number_channels, disp_seq);
    if (pre_wet_tips == 1)
    {
      p_vol=p_vol_arr.GetAt(1-1);
      simple_aspirate(asp_seq, 0, p_vol, tips, number_channels, STAR);
      simple_dispense(asp_seq, 0, 1, p_vol, 0, 0, number_channels, STAR);
    }
    {
      pipette_loop = 0;
      disp_seq.SetCurrentPosition(1);
      while (
         (disp_seq.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, disp_seq, 1);
        pipette_loop = pipette_loop + 1;
        p_vol=p_vol_arr.GetAt(pipette_loop-1);
        simple_aspirate(asp_seq, 0, p_vol, tips, number_channels, STAR);
        simple_dispense(disp_seq, 1, 0, p_vol, 0, 0, number_channels, STAR);
        if (
           (disp_seq.GetCurrentPosition() > 0 && disp_seq.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      disp_seq.SetMax(disp_seq.GetTotal());
      disp_seq.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("**** end pipette_media_volume_arr shard sub-method ****"));
  }

  function add_reagents_reuse_tips_vol_arr( sequence & asp_seq, sequence & disp_seq, variable & p_vol_arr[], variable pre_wet_tips, variable pickup_and_eject_tips, sequence & tips, variable number_channels, device & STAR ) void {
    private variable pipette_loop;
    private variable vol_arr_length;
    private variable loopCounter1;
    private variable p_vol;
    MECC::TraceComment(Translate("**** start add_reagents_reuse_tips_vol_arr shared sub-method ****"));
    vol_arr_length=p_vol_arr.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < vol_arr_length;)
      {
        loopCounter1 = loopCounter1 + 1;
        p_vol=p_vol_arr.GetAt(loopCounter1-1);
        TrcTrace4(Translate("    "), loopCounter1, Translate("    p_vol: "), p_vol);
      }
    }
    check_seq_lengths_and_channels(asp_seq, disp_seq, number_channels);
    check_p_vol_arr_disp_seq(vol_arr_length, number_channels, disp_seq);
    if (pickup_and_eject_tips == 1)
    {
      tip_pickup(tips, number_channels, STAR);
    }
    if (pre_wet_tips == 1)
    {
      p_vol=p_vol_arr.GetAt(1-1);
      simple_aspirate(asp_seq, 0, p_vol, tips, number_channels, STAR);
      simple_dispense(asp_seq, 0, 1, p_vol, 0, 0, number_channels, STAR);
    }
    {
      pipette_loop = 0;
      disp_seq.SetCurrentPosition(1);
      while (
         (disp_seq.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, disp_seq, 1);
        pipette_loop = pipette_loop + 1;
        p_vol=p_vol_arr.GetAt(pipette_loop-1);
        simple_aspirate(asp_seq, 0, p_vol, tips, number_channels, STAR);
        simple_dispense(disp_seq, 1, 1, p_vol, 0, 0, number_channels, STAR);
        if (
           (disp_seq.GetCurrentPosition() > 0 && disp_seq.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      disp_seq.SetMax(disp_seq.GetTotal());
      disp_seq.SetCurrentPosition(1);
    }
    if (pickup_and_eject_tips == 1)
    {
      tip_eject(number_channels, STAR);
    }
    MECC::TraceComment(Translate("**** end add_reagents_reuse_tips_vol_arr shard sub-method ****"));
  }

  private function check_p_vol_arr_disp_seq( variable vol_arr_length, variable number_channels, sequence disp_seq ) void {
    private variable disp_len_str;
    private variable disp_seq_length;
    private variable vol_arr_check_size;
    private variable err_str;
    private variable vol_len_str;
    private variable chan_len_str;
    vol_arr_check_size = vol_arr_length * number_channels;
    disp_seq_length = SeqGetTotal(disp_seq);
    if (vol_arr_check_size != disp_seq_length)
    {
      err_str = Translate("Error in pipette_media_volume_arr sub-method: ");
      disp_len_str = StrIStr(disp_seq_length);
      vol_len_str = StrIStr(vol_arr_length);
      chan_len_str = StrIStr(number_channels);
      err_str = StrConcat4(err_str, Translate("The number of values in p_vol_arr ("), vol_len_str, Translate(") "));
      err_str = StrConcat4(err_str, Translate("is not equal to the length of disp_seq ("), disp_len_str, Translate(") "));
      err_str = StrConcat4(err_str, Translate("divided by the number of pipetting channels used ("), chan_len_str, Translate(") "));
      ErrRaise(1, err_str);
    }
  }
} // library namespace
