global device ML_STAR ("Growth and Selection Cycle.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
#include "Growth and Selection Cycle.res"
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "HSLTimLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "..\\..\\HSLTrcLib.hsl" }
variable tip_counter_50_channels;
variable tip_counter_1000_channels;
variable tip_counter_300_channels;
variable parameters_file_path;
variable total_cycles;
variable cycle_number;
variable data_dir_path;
variable stock_plate_end_pos;
variable inducer_conc;
variable neg_select_id;
variable neg_select_conc;
variable pos_select_units;
variable neg_select_units;
variable inducer_id;
variable inducer_units;
variable pos_select_conc;
variable pos_select_id;
variable year_string;
variable month_string;
variable day_string;
variable media_id;
variable strain_1_id;
variable plasmid_1_id;
variable meta_file_path;
variable experiment_id;
variable start_time_str;
variable worklist_file_path;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    ReadParameters();
    StartUp();
    stock_plate_end_pos = total_cycles * 8;
    ML_STAR.Inducer_stock_plate.SetCount(stock_plate_end_pos);
    ML_STAR.Pos_select_stock_plate.SetCount(stock_plate_end_pos);
    ML_STAR.Neg_select_stock_plate.SetCount(stock_plate_end_pos);
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
    {
      sequence arrseqAspirate_1[];
      sequence arrseqDispense_1[];
      arrseqAspirate_1.SetSize(1);
      arrseqAspirate_1.SetAt(0, ML_STAR.Inducer_stock_0);
      arrseqDispense_1.SetSize(1);
      arrseqDispense_1.SetAt(0, ML_STAR.Inducer_stock_plate);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslFalse);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 5);
      PTL::SetPipettingState("DispenseMode", 1);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_1, arrseqDispense_1, 1, 1, 650, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Inducer_stock_0, ML_STAR.Inducer_stock_plate) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
    {
      sequence arrseqAspirate_2[];
      sequence arrseqDispense_2[];
      arrseqAspirate_2.SetSize(1);
      arrseqAspirate_2.SetAt(0, ML_STAR.Pos_select_stock_0);
      arrseqDispense_2.SetSize(1);
      arrseqDispense_2.SetAt(0, ML_STAR.Pos_select_stock_plate);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslFalse);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 5);
      PTL::SetPipettingState("DispenseMode", 1);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_2, arrseqDispense_2, 1, 1, 650, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Pos_select_stock_0, ML_STAR.Pos_select_stock_plate) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
    {
      sequence arrseqAspirate_3[];
      sequence arrseqDispense_3[];
      arrseqAspirate_3.SetSize(1);
      arrseqAspirate_3.SetAt(0, ML_STAR.Neg_select_stock_0);
      arrseqDispense_3.SetSize(1);
      arrseqDispense_3.SetAt(0, ML_STAR.Neg_select_stock_plate);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslFalse);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 5);
      PTL::SetPipettingState("DispenseMode", 1);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_3, arrseqDispense_3, 1, 1, 650, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Neg_select_stock_0, ML_STAR.Neg_select_stock_plate) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
    CleanUp();
    WriteParameters();
    SaveWorklistAndMetadata();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
  } }
