private function CleanUp(  ) void ;
private function ReadParameters(  ) void ;
private function SaveWorklistAndMetadata(  ) void ;
private function StartUp(  ) void ;
private function WriteParameters(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
}

private function StartUp(  ) void {
  private variable tip_counter_array[];
  year_string = TimGetFormattedDate("%Y");
  month_string = TimGetFormattedDate("%m");
  day_string = TimGetFormattedDate("%d");
  start_time_str = TimGetFormattedTime("%H:%M");
  TIP_HANDLING_WITH_96_HEAD::GetTipCounters(tip_counter_array);
  tip_counter_1000_channels=tip_counter_array.GetAt(1-1);
  tip_counter_300_channels=tip_counter_array.GetAt(2-1);
  tip_counter_50_channels=tip_counter_array.GetAt(3-1);
  TipCount::Read2(ML_STAR.Tips_1000_Channels, tip_counter_1000_channels, ML_STAR);
  TipCount::Read2(ML_STAR.Tips_300_Channels, tip_counter_300_channels, ML_STAR);
  TipCount::Read2(ML_STAR.Tips_50_Channels, tip_counter_50_channels, ML_STAR);
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
}

private function CleanUp(  ) void {
  TipCount::Write2(ML_STAR.Tips_1000_Channels, tip_counter_1000_channels, ML_STAR);
  TipCount::Write2(ML_STAR.Tips_300_Channels, tip_counter_300_channels, ML_STAR);
  TipCount::Write2(ML_STAR.Tips_50_Channels, tip_counter_50_channels, ML_STAR);
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR);
}

private function ReadParameters(  ) void {
  private variable parameters_file_name;
  private file file1;
  private variable meta_file_name;
  private variable overlord_folder_path;
  if(0){
    cycle_number = 0;
    total_cycles = 8;
    data_dir_path = "C:\\Shared Files\\Data\\2019-01-08-2201_Growth Cycle Test\\";
    inducer_id = LMSF_UTILITIES::GetMetaIdentifier("additive", "select inducer for the experiment");
    inducer_conc = LMSF_UTILITIES::GetAdditiveConcentration(inducer_id, "inducer concentration:", inducer_units);
    pos_select_id = LMSF_UTILITIES::GetMetaIdentifier("additive", "select positive selection additive for the experiment");
    pos_select_conc = LMSF_UTILITIES::GetAdditiveConcentration(pos_select_id, "positive selector concentration:", pos_select_units);
    neg_select_id = LMSF_UTILITIES::GetMetaIdentifier("additive", "select negaitve selection additive for the experiment");
    neg_select_conc = LMSF_UTILITIES::GetAdditiveConcentration(neg_select_id, "negative selector concentration:", neg_select_units);
    media_id = LMSF_UTILITIES::GetMetaIdentifier("media", "base media for the experiment");
    strain_1_id = LMSF_UTILITIES::GetMetaIdentifier("strain", "select the strain used for the experiment");
    plasmid_1_id = LMSF_UTILITIES::GetMetaIdentifier("plasmid", "select the identifier for the plasmid or plasmid library");
  }
  overlord_folder_path = LMSF_UTILITIES::GetOverlordFolderPath();
  parameters_file_name = "growth experiment parameters.csv";
  parameters_file_path = HSLExtensions::File::CreateFullFileName(overlord_folder_path, parameters_file_name);
  file1.AddField("data_directory", data_dir_path, hslString, 255);
  file1.AddField("experiment_id", experiment_id, hslString, 255);
  file1.AddField("cycle_number", cycle_number, hslInteger);
  file1.AddField("total_cycles", total_cycles, hslInteger);
  file1.AddField("strain_1_id", strain_1_id, hslString, 255);
  file1.AddField("plasmid_1_id", plasmid_1_id, hslString, 255);
  file1.AddField("base_media", media_id, hslString, 255);
  file1.AddField("inducer_id", inducer_id, hslString, 255);
  file1.AddField("inducer_conc", inducer_conc, hslFloat);
  file1.AddField("inducer_units", inducer_units, hslString, 255);
  file1.AddField("pos_select_id", pos_select_id, hslString, 255);
  file1.AddField("pos_select_conc", pos_select_conc, hslFloat);
  file1.AddField("pos_select_units", pos_select_units, hslString, 255);
  file1.AddField("neg_select_id", neg_select_id, hslString, 255);
  file1.AddField("neg_select_conc", neg_select_conc, hslFloat);
  file1.AddField("neg_select_units", neg_select_units, hslString, 255);
  file1.SetDelimiter(hslCSVDelimited);
  if( 0 == file1.Open(parameters_file_path, hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, parameters_file_path, "HxMetEdCompCmd");
  }
  if( 0 == file1.ReadRecord() )
  {
        MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  experiment_id = HSLExtensions::File::GetFileName(data_dir_path);
  meta_file_name = experiment_id + "_STAR-meta.txt";
  meta_file_path = HSLExtensions::File::CreateFullFileName(data_dir_path, meta_file_name);
}

private function WriteParameters(  ) void {
  private file file1;
  file1.AddField("data_directory", data_dir_path, hslString, 255);
  file1.AddField("experiment_id", experiment_id, hslString, 255);
  file1.AddField("cycle_number", cycle_number, hslInteger);
  file1.AddField("total_cycles", total_cycles, hslInteger);
  file1.AddField("strain_1_id", strain_1_id, hslString, 255);
  file1.AddField("plasmid_1_id", plasmid_1_id, hslString, 255);
  file1.AddField("base_media", media_id, hslString, 255);
  file1.AddField("inducer_id", inducer_id, hslString, 255);
  file1.AddField("inducer_conc", inducer_conc, hslFloat);
  file1.AddField("inducer_units", inducer_units, hslString, 255);
  file1.AddField("pos_select_id", pos_select_id, hslString, 255);
  file1.AddField("pos_select_conc", pos_select_conc, hslFloat);
  file1.AddField("pos_select_units", pos_select_units, hslString, 255);
  file1.AddField("neg_select_id", neg_select_id, hslString, 255);
  file1.AddField("neg_select_conc", neg_select_conc, hslFloat);
  file1.AddField("neg_select_units", neg_select_units, hslString, 255);
  file1.SetDelimiter(hslCSVDelimited);
  if( 0 == file1.Open(parameters_file_path, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, parameters_file_path, "HxMetEdCompCmd");
  }
  if( 0 == file1.WriteRecord() )
  {
        MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
}

private function SaveWorklistAndMetadata(  ) void {
  private variable meta_string;
  private variable step_str;
  private variable concentration_str;
  meta_string = "";
  step_str = "00 - Distribute Stock Solutions";
  meta_string = meta_string + "  <base_media>";
  meta_string = meta_string + media_id;
  meta_string = meta_string + "</base_media>\n";
  meta_string = meta_string + "\n";
  meta_string = meta_string + "  <additive type='inducer'>\n";
  meta_string = meta_string + "    <name>";
  meta_string = meta_string + inducer_id;
  meta_string = meta_string + "</name>\n";
  meta_string = meta_string + "    <starting_stock>\n";
  meta_string = meta_string + "      <concentration>";
  concentration_str = StrFStr(inducer_conc);
  meta_string = meta_string + concentration_str;
  meta_string = meta_string + "</concentration>\n";
  meta_string = meta_string + "      <units>";
  meta_string = meta_string + inducer_units;
  meta_string = meta_string + "</units>\n";
  meta_string = meta_string + "    </starting_stock>\n";
  meta_string = meta_string + "  </additive>\n";
  meta_string = meta_string + "\n";
  meta_string = meta_string + "  <additive type='positive selector'>\n";
  meta_string = meta_string + "    <name>";
  meta_string = meta_string + pos_select_id;
  meta_string = meta_string + "</name>\n";
  meta_string = meta_string + "    <starting_stock>\n";
  meta_string = meta_string + "      <concentration>";
  concentration_str = StrFStr(pos_select_conc);
  meta_string = meta_string + concentration_str;
  meta_string = meta_string + "</concentration>\n";
  meta_string = meta_string + "      <units>";
  meta_string = meta_string + pos_select_units;
  meta_string = meta_string + "</units>\n";
  meta_string = meta_string + "    </starting_stock>\n";
  meta_string = meta_string + "  </additive>\n";
  meta_string = meta_string + "\n";
  meta_string = meta_string + "  <additive type='negative selector'>\n";
  meta_string = meta_string + "    <name>";
  meta_string = meta_string + neg_select_id;
  meta_string = meta_string + "</name>\n";
  meta_string = meta_string + "    <starting_stock>\n";
  meta_string = meta_string + "      <concentration>";
  concentration_str = StrFStr(neg_select_conc);
  meta_string = meta_string + concentration_str;
  meta_string = meta_string + "</concentration>\n";
  meta_string = meta_string + "      <units>";
  meta_string = meta_string + neg_select_units;
  meta_string = meta_string + "</units>\n";
  meta_string = meta_string + "    </starting_stock>\n";
  meta_string = meta_string + "  </additive>\n";
  meta_string = meta_string + "\n";
  meta_string = meta_string + "  <strains>\n";
  meta_string = meta_string + "    <strain number='1'>\n";
  meta_string = meta_string + "      <strain_id>";
  meta_string = meta_string + strain_1_id;
  meta_string = meta_string + "</strain_id>\n";
  meta_string = meta_string + "      <plasmid_id>";
  meta_string = meta_string + plasmid_1_id;
  meta_string = meta_string + "</plasmid_id>\n";
  meta_string = meta_string + "    </strain>\n";
  meta_string = meta_string + "  </strains>\n";
  worklist_file_path = "";
  LMSF_UTILITIES::SaveToMetaDataFile(meta_file_path, experiment_id, step_str, 1, 1, worklist_file_path, year_string, month_string, day_string, start_time_str, meta_string);
}
