private function CleanUp(  ) void ;
private function ReadParameters(  ) void ;
private function StartUp(  ) void ;
private function WriteParameters(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
}

private function StartUp(  ) void {
  private variable tip_counter_array[];
  TIP_HANDLING_WITH_96_HEAD::GetTipCounters(tip_counter_array);
  tip_counter_1000_channels=tip_counter_array.GetAt(1-1);
  tip_counter_300_channels=tip_counter_array.GetAt(2-1);
  tip_counter_50_channels=tip_counter_array.GetAt(3-1);
  TipCount::Read2(ML_STAR.Tips_1000_Channels, tip_counter_1000_channels, ML_STAR);
  TipCount::Read2(ML_STAR.Tips_300_Channels, tip_counter_300_channels, ML_STAR);
  TipCount::Read2(ML_STAR.Tips_50_Channels, tip_counter_50_channels, ML_STAR);
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
}

private function CleanUp(  ) void {
  TipCount::Write2(ML_STAR.Tips_1000_Channels, tip_counter_1000_channels, ML_STAR);
  TipCount::Write2(ML_STAR.Tips_300_Channels, tip_counter_300_channels, ML_STAR);
  TipCount::Write2(ML_STAR.Tips_50_Channels, tip_counter_50_channels, ML_STAR);
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR);
}

private function ReadParameters(  ) void {
  private variable parameters_file_name;
  private variable methods_path;
  private file file1;
  methods_path = FilGetMethodsPath();
  parameters_file_name = "growth experiment parameters.txt";
  parameters_file_path = HSLExtensions::File::CreateFullFileName(methods_path, parameters_file_name);
  file1.AddField("data_directory", data_dir_path, hslString, 255);
  file1.AddField("cycle_number", cycle_number, hslInteger);
  file1.AddField("total_cycles", total_cycles, hslInteger);
  file1.SetDelimiter(hslCSVDelimited);
  if( 0 == file1.Open(parameters_file_path, hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, parameters_file_path, "HxMetEdCompCmd");
  }
  if( 0 == file1.ReadRecord() )
  {
        MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
}

private function WriteParameters(  ) void {
  private file file1;
  file1.AddField("data_directory", data_dir_path, hslString, 255);
  file1.AddField("cycle_number", cycle_number, hslInteger);
  file1.AddField("total_cycles", total_cycles, hslInteger);
  file1.SetDelimiter(hslCSVDelimited);
  if( 0 == file1.Open(parameters_file_path, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, parameters_file_path, "HxMetEdCompCmd");
  }
  if( 0 == file1.WriteRecord() )
  {
        MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
}
