 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
#include "Inducer gradient plate.res"
variable tip_counter_1000_channels;
variable tip_counter_300_channels;
global device ML_STAR ("Inducer gradient plate.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    StartUp();
    {
      sequence arrseqAspirate_1[];
      sequence arrseqDispense_1[];
      arrseqAspirate_1.SetSize(1);
      arrseqAspirate_1.SetAt(0, ML_STAR.Media_source);
      arrseqDispense_1.SetSize(1);
      arrseqDispense_1.SetAt(0, ML_STAR.IPTG_2x);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 5);
      PTL::SetPipettingState("DispenseMode", 1);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_1, arrseqDispense_1, 1, 1, 742, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Media_source, ML_STAR.IPTG_2x) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    {
      sequence arrseqAspirate_2[];
      sequence arrseqDispense_2[];
      arrseqAspirate_2.SetSize(1);
      arrseqAspirate_2.SetAt(0, ML_STAR.Media_source);
      arrseqDispense_2.SetSize(1);
      arrseqDispense_2.SetAt(0, ML_STAR.Media_dispense);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 5);
      PTL::SetPipettingState("DispenseMode", 1);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_2, arrseqDispense_2, 1, 1, 450, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, ML_STAR.Media_dispense) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    {
      sequence arrseqAspirate_3[];
      sequence arrseqDispense_3[];
      arrseqAspirate_3.SetSize(1);
      arrseqAspirate_3.SetAt(0, ML_STAR.IPTG_stock);
      arrseqDispense_3.SetSize(1);
      arrseqDispense_3.SetAt(0, ML_STAR.IPTG_2x);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, arrseqAspirate_3, arrseqDispense_3, 1, 1, 212, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.IPTG_stock, ML_STAR.IPTG_2x) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    {
      sequence arrseqAspirate_4[];
      sequence arrseqDispense_4[];
      arrseqAspirate_4.SetSize(1);
      arrseqAspirate_4.SetAt(0, ML_STAR.IPTG_dilution_from);
      arrseqDispense_4.SetSize(1);
      arrseqDispense_4.SetAt(0, ML_STAR.IPTG_dilution_to);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
      PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3);
      PTL::SetPipettingState("AspiratePrerinsingMixVolume", 800);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslTrue);
      PTL::SetPipettingState("DispenseSequenceReducible", hslTrue);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_4, arrseqDispense_4, 1, 1, 450, 0, 1, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.IPTG_dilution_from, ML_STAR.IPTG_dilution_to) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    ML_STAR.Media_source.SetCurrentPosition(1);
    {
      sequence arrseqAspirate_5[];
      sequence arrseqDispense_5[];
      arrseqAspirate_5.SetSize(1);
      arrseqAspirate_5.SetAt(0, ML_STAR.Media_source);
      arrseqDispense_5.SetSize(1);
      arrseqDispense_5.SetAt(0, ML_STAR.No_bacteria);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_5, arrseqDispense_5, 1, 1, 50, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Media_source, ML_STAR.No_bacteria) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
  } }
