 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
#include "Inducer gradient plus 1000x bacteria.res"
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLFileDirectoryLib.hsl" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
variable loopCounter1;
global device ML_STAR ("Inducer gradient plus 1000x bacteria.lay", "ML_STAR", hslTrue);
variable mix_volume;
variable volume_left;
variable tip_counter_1000_channels;
variable tip_counter_300_channels;
variable Bacteria_now;
variable User_choice;
variable inducer_stock_concentration;
variable plasmid_1_id;
variable plasmid_2_id;
variable strain_1_id;
variable strain_2_id;
variable inducer_id;
variable inducer_units;
variable worklist_file_path;
variable conc_str;
variable plasmid_str;
variable strain_str;
dialog customDialog_1;
dialog customDialog_2;
variable bact_2_stock_str;
variable bact_1_stock_str;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    GetParams();
    StartUp();
    MECC::TraceComment(Translate("=================================================\nPipette media for inducer dilution\n================================================="));
    {
      sequence arrseqAspirate_3[];
      sequence arrseqDispense_3[];
      arrseqAspirate_3.SetSize(1);
      arrseqAspirate_3.SetAt(0, ML_STAR.Media_source);
      arrseqDispense_3.SetSize(1);
      arrseqDispense_3.SetAt(0, ML_STAR.IPTG_2x);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 5);
      PTL::SetPipettingState("DispenseMode", 1);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_3, arrseqDispense_3, 1, 1, 700, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Media_source, ML_STAR.IPTG_2x) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    MECC::TraceComment(Translate("=================================================\nPipette media into growth plate\n================================================="));
    {
      sequence arrseqAspirate_4[];
      sequence arrseqDispense_4[];
      arrseqAspirate_4.SetSize(1);
      arrseqAspirate_4.SetAt(0, ML_STAR.Media_source);
      arrseqDispense_4.SetSize(1);
      arrseqDispense_4.SetAt(0, ML_STAR.Media_dispense);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 5);
      PTL::SetPipettingState("DispenseMode", 1);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_4, arrseqDispense_4, 1, 1, 450, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, ML_STAR.Media_dispense) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    MECC::TraceComment(Translate("=================================================\nPipette serial inducer gradient\n================================================="));
    {
      sequence arrseqAspirate_5[];
      sequence arrseqDispense_5[];
      arrseqAspirate_5.SetSize(1);
      arrseqAspirate_5.SetAt(0, ML_STAR.IPTG_stock);
      arrseqDispense_5.SetSize(1);
      arrseqDispense_5.SetAt(0, ML_STAR.IPTG_2x);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, arrseqAspirate_5, arrseqDispense_5, 1, 1, 200, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.IPTG_stock, ML_STAR.IPTG_2x) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    {
      sequence arrseqAspirate_6[];
      sequence arrseqDispense_6[];
      arrseqAspirate_6.SetSize(1);
      arrseqAspirate_6.SetAt(0, ML_STAR.IPTG_dilution_from);
      arrseqDispense_6.SetSize(1);
      arrseqDispense_6.SetAt(0, ML_STAR.IPTG_dilution_to);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
      PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3);
      PTL::SetPipettingState("AspiratePrerinsingMixVolume", 800);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslTrue);
      PTL::SetPipettingState("DispenseSequenceReducible", hslTrue);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_6, arrseqDispense_6, 1, 1, 450, 0, 1, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.IPTG_dilution_from, ML_STAR.IPTG_dilution_to) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    MECC::TraceComment(Translate("===================================================\nPause and wait for user response if bacteria to be loaded \"later\"\n==================================================="));
    if (Bacteria_now == "No")
    {
      MECC::TraceComment(Translate("        ===========================================\n        Pause...\n        ==========================================="));
      customDialog_2.InitCustomDialog("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");
      customDialog_2.SetCustomDialogProperty( "textBlock1.Text", bact_1_stock_str );
      customDialog_2.SetCustomDialogProperty( "textBlock2.Text", bact_2_stock_str );
      customDialog_2.ShowCustomDialog();
      User_choice = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
      if (User_choice == 2)
      {
        abort;
      }
      customDialog_1.InitCustomDialog("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");
      customDialog_1.ShowCustomDialog();
      User_choice = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
      if (User_choice == 2)
      {
        abort;
      }
    }
    else
    {
      MECC::TraceComment(Translate("        ===========================================\n        No pause\n        ==========================================="));
    }
    MECC::TraceComment(Translate("=================================================\nPipette bacteria\n================================================="));
    MECC::TraceComment(Translate("        =================================================\n        Distribute media for bacteria\n        ================================================="));
    ML_STAR.Media_source.SetCurrentPosition(1);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    MECC::TraceComment(Translate("        =================================================\n        Dilute bacteria\n        ================================================="));
    {
      sequence arrseqAspirate_7[];
      sequence arrseqDispense_7[];
      arrseqAspirate_7.SetSize(1);
      arrseqAspirate_7.SetAt(0, ML_STAR.Bacteria_stock_1);
      arrseqDispense_7.SetSize(1);
      arrseqDispense_7.SetAt(0, ML_STAR.Bacteria_1_100x);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
      PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3.5);
      PTL::SetPipettingState("AspiratePrerinsingMixVolume", 300);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      PTL::SetPipettingState("DispensePrerinsingMixCycles", 2);
      PTL::SetPipettingState("DispensePrerinsingMixPosition", 2);
      PTL::SetPipettingState("DispensePrerinsingMixVolume", 800);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_7, arrseqDispense_7, 1, 1, 80, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Bacteria_stock_1, ML_STAR.Bacteria_1_100x) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    {
      sequence arrseqAspirate_8[];
      sequence arrseqDispense_8[];
      arrseqAspirate_8.SetSize(1);
      arrseqAspirate_8.SetAt(0, ML_STAR.Bacteria_stock_2);
      arrseqDispense_8.SetSize(1);
      arrseqDispense_8.SetAt(0, ML_STAR.Bacteria_2_100x);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
      PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3.5);
      PTL::SetPipettingState("AspiratePrerinsingMixVolume", 300);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      PTL::SetPipettingState("DispensePrerinsingMixCycles", 2);
      PTL::SetPipettingState("DispensePrerinsingMixPosition", 2);
      PTL::SetPipettingState("DispensePrerinsingMixVolume", 800);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_8, arrseqDispense_8, 1, 1, 80, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Bacteria_stock_2, ML_STAR.Bacteria_2_100x) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    {
      sequence arrseqAspirate_9[];
      sequence arrseqDispense_9[];
      arrseqAspirate_9.SetSize(1);
      arrseqAspirate_9.SetAt(0, ML_STAR.Bacteria_all_100x);
      arrseqDispense_9.SetSize(1);
      arrseqDispense_9.SetAt(0, ML_STAR.Bacteria_all_10x);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
      PTL::SetPipettingState("AspiratePrerinsingMixPosition", 5);
      PTL::SetPipettingState("AspiratePrerinsingMixVolume", 650);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      PTL::SetPipettingState("DispensePrerinsingMixCycles", 2);
      PTL::SetPipettingState("DispensePrerinsingMixPosition", 3.5);
      PTL::SetPipettingState("DispensePrerinsingMixVolume", 650);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_9, arrseqDispense_9, 1, 1, 80, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Bacteria_all_100x, ML_STAR.Bacteria_all_10x) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    MECC::TraceComment(Translate("        =================================================\n        Distribute bacteria across plate\n        ================================================="));
    volume_left = 800;
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    {
      loopCounter1 = 0;
      while (
         (ML_STAR.Bacteria_dilution_to.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Bacteria_all_10x, 1, ML_STAR.Bacteria_dilution_to, 1);
        loopCounter1 = loopCounter1 + 1;
        ML_STAR.Bacteria_all_10x.SetCurrentPosition(1);
        mix_volume = volume_left - 100;
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        volume_left = volume_left - 50;
        if (
           (ML_STAR.Bacteria_dilution_to.GetCurrentPosition() > 0 && ML_STAR.Bacteria_dilution_to.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Bacteria_all_10x.SetMax(ML_STAR.Bacteria_all_10x.GetTotal());
      ML_STAR.Bacteria_dilution_to.SetMax(ML_STAR.Bacteria_dilution_to.GetTotal());
      ML_STAR.Bacteria_all_10x.SetCurrentPosition(1);
      ML_STAR.Bacteria_dilution_to.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    MECC::TraceComment(Translate("=================================================\nAdd 50 ul media to each well that does not get bacteria\n================================================="));
    {
      sequence arrseqAspirate_10[];
      sequence arrseqDispense_10[];
      arrseqAspirate_10.SetSize(1);
      arrseqAspirate_10.SetAt(0, ML_STAR.Media_source);
      arrseqDispense_10.SetSize(1);
      arrseqDispense_10.SetAt(0, ML_STAR.No_bacteria);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_10, arrseqDispense_10, 1, 1, 50, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Media_source, ML_STAR.No_bacteria) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    CalculateOutputs();
    SaveWorklistAndMetadata();
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
  } }
