private function CalculateOutputs(  ) void ;
private function CleanUp(  ) void ;
private function SaveWorklistAndMetadata(  ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function CleanUp(  ) void {
  TipCount::Write2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, tip_counter_1000_channels, ML_STAR);
  TipCount::Write2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, tip_counter_300_channels, ML_STAR);
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR);
}

private function StartUp(  ) void {
  private variable loopCounter2;
  private variable strain_prompt;
  private variable plasmid_prompt;
  private variable inducer_prompt;
  private variable loopCounter3;
  private variable path_end;
  private variable loopCounter4;
  private variable inducer_conc_str;
  private variable worklist_folder_path;
  private variable worklist_file_name;
  private variable directory_exists;
  private variable directory_created;
  private dialog customDialog_1;
  private dialog customDialog_2;
  private dialog customDialog_3;
  private dialog customDialog_4;
  private dialog customDialog_5;
  private dialog customDialog_6;
  private dialog customDialog_7;
  private dialog customDialog_8;
  private dialog customDialog_9;
  private dialog customDialog_10;
  private dialog customDialog_11;
  private dialog customDialog_12;
  private variable meta_file_name;
  private variable inducer_stock_str;
  private variable media_trough_str;
  private variable review_string;
  customDialog_1.InitCustomDialog("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");
  customDialog_1.ShowCustomDialog();
  User_choice = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
  if (User_choice == 2)
  {
    abort;
  }
  year_string = TimGetFormattedDate("%Y");
  month_string = TimGetFormattedDate("%m");
  day_string = TimGetFormattedDate("%d");
  hour_str = TimGetFormattedTime("%H");
  minute_str = TimGetFormattedTime("%M");
  start_time_str = TimGetFormattedTime("%H:%M");
  media_id = "";
  {
    loopCounter2 = 0;
    while (media_id == "")
    {
      loopCounter2 = loopCounter2 + 1;
      media_id = LMSF_UTILITIES::GetMetaIdentifier("media", "");
    }
  }
  strain_prompt = "Select the strain for bacteria 1: ";
  strain_1_id = "";
  {
    loopCounter2 = 0;
    while (strain_1_id == "")
    {
      loopCounter2 = loopCounter2 + 1;
      strain_1_id = LMSF_UTILITIES::GetMetaIdentifier("strain", strain_prompt);
    }
  }
  plasmid_prompt = "Select the plasmid for bacteria 1: ";
  plasmid_1_id = "";
  {
    loopCounter2 = 0;
    while (plasmid_1_id == "")
    {
      loopCounter2 = loopCounter2 + 1;
      plasmid_1_id = LMSF_UTILITIES::GetMetaIdentifier("plasmid", plasmid_prompt);
    }
  }
  strain_prompt = "Select the strain for bacteria 2: ";
  strain_2_id = "";
  {
    loopCounter2 = 0;
    while (strain_2_id == "")
    {
      loopCounter2 = loopCounter2 + 1;
      strain_2_id = LMSF_UTILITIES::GetMetaIdentifier("strain", strain_prompt);
    }
  }
  plasmid_prompt = "Select the plasmid for bacteria 2: ";
  plasmid_2_id = "";
  {
    loopCounter2 = 0;
    while (plasmid_2_id == "")
    {
      loopCounter2 = loopCounter2 + 1;
      plasmid_2_id = LMSF_UTILITIES::GetMetaIdentifier("plasmid", plasmid_prompt);
    }
  }
  inducer_prompt = "Select the inducer to be used for the method: ";
  inducer_id = "";
  {
    loopCounter2 = 0;
    while (inducer_id == "")
    {
      loopCounter2 = loopCounter2 + 1;
      inducer_id = LMSF_UTILITIES::GetMetaIdentifier("additive", inducer_prompt);
    }
  }
  inducer_prompt = "Enter the concentration of the ";
  inducer_prompt = inducer_prompt + inducer_id;
  inducer_prompt = inducer_prompt + " stock solution:";
  inducer_units = "";
  inducer_conc_str = "";
  {
    loopCounter3 = 0;
    while (inducer_units == "")
    {
      loopCounter3 = loopCounter3 + 1;
      inducer_stock_concentration = LMSF_UTILITIES::GetAdditiveConcentration(inducer_id, inducer_prompt, inducer_units);
      inducer_conc_str = StrFStr(inducer_stock_concentration);
      inducer_conc_str = inducer_conc_str + " ";
      inducer_conc_str = inducer_conc_str + inducer_units;
    }
  }
  worklist_folder_path = LMSF_UTILITIES::GetWorklistFolderPath();
  worklist_folder_path = worklist_folder_path + year_string;
  worklist_folder_path = worklist_folder_path + "-";
  worklist_folder_path = worklist_folder_path + month_string;
  worklist_folder_path = worklist_folder_path + "-";
  worklist_folder_path = worklist_folder_path + day_string;
  worklist_folder_path = worklist_folder_path + "-";
  worklist_folder_path = worklist_folder_path + hour_str;
  worklist_folder_path = worklist_folder_path + minute_str;
  worklist_folder_path = worklist_folder_path + "_";
  worklist_folder_path = worklist_folder_path + inducer_id;
  worklist_folder_path = worklist_folder_path + " gradient_";
  worklist_folder_path = worklist_folder_path + plasmid_1_id;
  worklist_folder_path = worklist_folder_path + "_";
  worklist_folder_path = worklist_folder_path + plasmid_2_id;
  worklist_folder_path = worklist_folder_path + "_";
  worklist_folder_path = worklist_folder_path + "STAR";
  worklist_folder_path = worklist_folder_path + "\\";
  worklist_file_name = year_string + Translate("-");
  worklist_file_name = worklist_file_name + month_string;
  worklist_file_name = worklist_file_name + Translate("-");
  worklist_file_name = worklist_file_name + day_string;
  worklist_file_name = worklist_file_name + Translate("_");
  worklist_file_name = worklist_file_name + hour_str;
  worklist_file_name = worklist_file_name + minute_str;
  worklist_file_name = worklist_file_name + "_";
  worklist_file_name = worklist_file_name + plasmid_1_id;
  worklist_file_name = worklist_file_name + "_";
  worklist_file_name = worklist_file_name + plasmid_2_id;
  experiment_name = worklist_file_name;
  meta_file_name = worklist_file_name + "_STAR-meta.txt";
  worklist_file_name = worklist_file_name + Translate("_growth plate.csv");
  path_end = "";
  {
    loopCounter4 = 0;
    while (path_end != ".csv")
    {
      loopCounter4 = loopCounter4 + 1;
      customDialog_2.InitCustomDialog("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");
      customDialog_2.SetCustomDialogProperty( "path1.Path", worklist_folder_path );
      customDialog_2.SetCustomDialogProperty( "textBox1.Text", worklist_file_name );
      customDialog_2.SetCustomDialogProperty( "textBox2.Text", meta_file_name );
      customDialog_2.ShowCustomDialog();
      worklist_folder_path = customDialog_2.GetCustomDialogProperty( "path1.Path" );
      worklist_file_name = customDialog_2.GetCustomDialogProperty( "textBox1.Text" );
      meta_file_name = customDialog_2.GetCustomDialogProperty( "textBox2.Text" );
      path_end = StrRight(worklist_file_name, 4);
    }
  }
  worklist_file_path = worklist_folder_path + worklist_file_name;
  meta_file_path = worklist_folder_path + meta_file_name;
  customDialog_3.InitCustomDialog("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");
  customDialog_3.ShowCustomDialog();
  exp_notes = customDialog_3.GetCustomDialogProperty( "textBox1.Text" );
  review_string = "Review Experiment: " + experiment_name;
  customDialog_4.InitCustomDialog("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");
  customDialog_4.SetCustomDialogProperty( "Title", review_string );
  customDialog_4.SetCustomDialogProperty( "textBlock2.Text", media_id );
  customDialog_4.SetCustomDialogProperty( "textBlock4.Text", strain_1_id );
  customDialog_4.SetCustomDialogProperty( "textBlock6.Text", plasmid_1_id );
  customDialog_4.SetCustomDialogProperty( "textBlock9.Text", strain_2_id );
  customDialog_4.SetCustomDialogProperty( "textBlock10.Text", plasmid_2_id );
  customDialog_4.SetCustomDialogProperty( "textBlock12.Text", inducer_id );
  customDialog_4.SetCustomDialogProperty( "textBlock14.Text", inducer_conc_str );
  customDialog_4.SetCustomDialogProperty( "textBlock16.Text", worklist_file_path );
  customDialog_4.SetCustomDialogProperty( "textBlock18.Text", exp_notes );
  customDialog_4.ShowCustomDialog();
  User_choice = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
  if (User_choice == 2)
  {
    abort;
  }
  directory_exists = HSLExtensions::Directory::Exists(worklist_folder_path);
  if (directory_exists == 0)
  {
    directory_created = HSLExtensions::Directory::Create(worklist_folder_path);
  }
  if (directory_created != 1)
  {
  }
  customDialog_5.InitCustomDialog("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");
  customDialog_5.ShowCustomDialog();
  Bacteria_now = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
  if (Bacteria_now == 2)
  {
    abort;
  }
  tip_counter_1000_channels = Translate("Tips_for_channels_1000");
  tip_counter_300_channels = Translate("Tips_for_channels_300");
  customDialog_6.InitCustomDialog("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");
  customDialog_6.ShowCustomDialog();
  User_choice = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
  if (User_choice == 2)
  {
    abort;
  }
  TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, tip_counter_1000_channels, ML_STAR, 100);
  customDialog_7.InitCustomDialog("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");
  customDialog_7.ShowCustomDialog();
  User_choice = customDialog_7.GetCustomDialogProperty( "ReturnValue" );
  if (User_choice == 2)
  {
    abort;
  }
  TipCount::Edit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, tip_counter_300_channels, ML_STAR, 100);
  inducer_stock_str = inducer_id + " stock:";
  bact_1_stock_str = strain_1_id + "/";
  bact_1_stock_str = bact_1_stock_str + plasmid_1_id;
  bact_1_stock_str = bact_1_stock_str + " stock:";
  bact_2_stock_str = strain_2_id + "/";
  bact_2_stock_str = bact_2_stock_str + plasmid_2_id;
  bact_2_stock_str = bact_2_stock_str + " stock:";
  if (Bacteria_now == 6)
  {
    customDialog_8.InitCustomDialog("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");
    customDialog_8.SetCustomDialogProperty( "textBlock1.Text", inducer_stock_str );
    customDialog_8.SetCustomDialogProperty( "textBlock2.Text", bact_2_stock_str );
    customDialog_8.SetCustomDialogProperty( "textBlock3.Text", bact_1_stock_str );
    customDialog_8.ShowCustomDialog();
    User_choice = customDialog_8.GetCustomDialogProperty( "ReturnValue" );
    if (User_choice == 2)
    {
      abort;
    }
  }
  else
  {
    customDialog_9.InitCustomDialog("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");
    customDialog_9.SetCustomDialogProperty( "textBlock1.Text", inducer_stock_str );
    customDialog_9.ShowCustomDialog();
    User_choice = customDialog_9.GetCustomDialogProperty( "ReturnValue" );
    if (User_choice == 2)
    {
      abort;
    }
  }
  media_trough_str = "Method requires at least 120 mL of ";
  media_trough_str = media_trough_str + media_id;
  media_trough_str = media_trough_str + " media.";
  customDialog_10.InitCustomDialog("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");
  customDialog_10.SetCustomDialogProperty( "textBlock1.Text", media_trough_str );
  customDialog_10.ShowCustomDialog();
  User_choice = customDialog_10.GetCustomDialogProperty( "ReturnValue" );
  if (User_choice == 2)
  {
    abort;
  }
  customDialog_11.InitCustomDialog("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");
  customDialog_11.ShowCustomDialog();
  User_choice = customDialog_11.GetCustomDialogProperty( "ReturnValue" );
  if (User_choice == 2)
  {
    abort;
  }
  customDialog_12.InitCustomDialog("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");
  customDialog_12.ShowCustomDialog();
  User_choice = customDialog_12.GetCustomDialogProperty( "ReturnValue" );
  if (User_choice == 2)
  {
    abort;
  }
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
}

private function CalculateOutputs(  ) void {
  private variable inducer_conc;
  private variable loopCounter2;
  private variable loopCounter3;
  private variable labware_id;
  private variable well_id;
  private variable strain;
  private variable plasmid;
  private variable loopCounter4;
  private variable row;
  private variable bool_write_flag;
  private variable position;
  conc_str = "concentration";
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, conc_str, 0);
  labware_id = "";
  well_id = "";
  inducer_conc = inducer_stock_concentration / (10 * 1.0);
  {
    loopCounter2 = 0;
    ML_STAR.IPTG_dilution_to.SetCurrentPosition(1);
    while (
       (ML_STAR.IPTG_dilution_to.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.IPTG_dilution_to, 1);
      loopCounter2 = loopCounter2 + 1;
      {
        for(loopCounter3 = 0; loopCounter3 < 8;)
        {
          loopCounter3 = loopCounter3 + 1;
          labware_id = SeqGetLabwareId(ML_STAR.IPTG_dilution_to);
          well_id = SeqGetPositionId(ML_STAR.IPTG_dilution_to);
          LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, conc_str, inducer_conc);
          SeqIncrement(ML_STAR.IPTG_dilution_to, 1);
        }
      }
      inducer_conc = inducer_conc / (2 * 1.0);
      if (
         (ML_STAR.IPTG_dilution_to.GetCurrentPosition() > 0 && ML_STAR.IPTG_dilution_to.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.IPTG_dilution_to.SetMax(ML_STAR.IPTG_dilution_to.GetTotal());
  }
  strain_str = "strain";
  strain = "none";
  plasmid_str = "plasmid";
  plasmid = "none";
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, strain_str, strain);
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, plasmid_str, plasmid);
  row = "";
  ML_STAR.Growth_Plate.SetCurrentPosition(9);
  {
    loopCounter4 = 0;
    while (
       (ML_STAR.Growth_Plate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.Growth_Plate, 1);
      loopCounter4 = loopCounter4 + 1;
      bool_write_flag = 0;
      position = ML_STAR.Growth_Plate.GetCurrentPosition();
      well_id = SeqGetPositionId(ML_STAR.Growth_Plate);
      row = StrLeft(well_id, 1);
      if (row == "A")
      {
        strain = strain_1_id;
        plasmid = plasmid_1_id;
        bool_write_flag = 1;
      }
      if (row == "B")
      {
        strain = strain_1_id;
        plasmid = plasmid_1_id;
        bool_write_flag = 1;
      }
      if (row == "C")
      {
        strain = strain_1_id;
        plasmid = plasmid_1_id;
        bool_write_flag = 1;
      }
      if (row == "F")
      {
        strain = strain_2_id;
        plasmid = plasmid_2_id;
        bool_write_flag = 1;
      }
      if (row == "G")
      {
        strain = strain_2_id;
        plasmid = plasmid_2_id;
        bool_write_flag = 1;
      }
      if (row == "H")
      {
        strain = strain_2_id;
        plasmid = plasmid_2_id;
        bool_write_flag = 1;
      }
      if (bool_write_flag == 1)
      {
        SeqSetProperty(ML_STAR.Growth_Plate, position, strain_str, strain);
        SeqSetProperty(ML_STAR.Growth_Plate, position, plasmid_str, plasmid);
      }
      SeqIncrement(ML_STAR.Growth_Plate, 1);
      if (
         (ML_STAR.Growth_Plate.GetCurrentPosition() > 0 && ML_STAR.Growth_Plate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.Growth_Plate.SetMax(ML_STAR.Growth_Plate.GetTotal());
  }
}

private function SaveWorklistAndMetadata(  ) void {
  private variable inducer_conc;
  private variable well_id;
  private variable plasmid;
  private variable strain;
  private variable position;
  private variable inducer_col_name;
  private file file1;
  private variable loopCounter2;
  private variable row_id;
  private variable column_id;
  private variable column_id_str;
  private variable meta_string;
  private variable inducer_conc_str;
  private variable step_str;
  if (1 == 0)
  {
    inducer_col_name = inducer_id + " concentration (";
    inducer_col_name = inducer_col_name + inducer_units;
    inducer_col_name = inducer_col_name + ")";
    file1.AddField("position", position, hslInteger);
    file1.AddField("well", well_id, hslString, 255);
    file1.AddField("row", row_id, hslString, 255);
    file1.AddField("column", column_id, hslInteger);
    file1.AddField(inducer_col_name, inducer_conc, hslFloat);
    file1.AddField("strain", strain, hslString, 255);
    file1.AddField("plasmid", plasmid, hslString, 255);
    file1.SetDelimiter(hslCSVDelimited);
    if( 0 == file1.Open(worklist_file_path, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, worklist_file_path, "HxMetEdCompCmd");
    }
  }
  file1.AddField("position", position, hslInteger);
  file1.AddField("well", well_id, hslString, 255);
  file1.AddField("row", row_id, hslString, 255);
  file1.AddField("column", column_id, hslInteger);
  file1.AddField(conc_str, inducer_conc, hslFloat);
  file1.AddField(strain_str, strain, hslString, 255);
  file1.AddField(plasmid_str, plasmid, hslString, 255);
  file1.SetDelimiter(hslCSVDelimited);
  if( 0 == file1.Open(worklist_file_path, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, worklist_file_path, "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    ML_STAR.Growth_Plate.SetCurrentPosition(1);
    while (
       (ML_STAR.Growth_Plate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.Growth_Plate, 1);
      loopCounter2 = loopCounter2 + 1;
      position = ML_STAR.Growth_Plate.GetCurrentPosition();
      well_id = SeqGetPositionId(ML_STAR.Growth_Plate);
      row_id = StrLeft(well_id, 1);
      column_id_str = StrMid(well_id, 1, 2);
      column_id = StrIVal(column_id_str);
      inducer_conc = SeqGetProperty(ML_STAR.Growth_Plate, position, conc_str);
      strain = SeqGetProperty(ML_STAR.Growth_Plate, position, strain_str);
      plasmid = SeqGetProperty(ML_STAR.Growth_Plate, position, plasmid_str);
      if( 0 == file1.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      SeqIncrement(ML_STAR.Growth_Plate, 1);
      if (
         (ML_STAR.Growth_Plate.GetCurrentPosition() > 0 && ML_STAR.Growth_Plate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.Growth_Plate.SetMax(ML_STAR.Growth_Plate.GetTotal());
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  meta_string = "";
  step_str = "growth plate prep";
  meta_string = meta_string + "  <base_media>";
  meta_string = meta_string + media_id;
  meta_string = meta_string + "</base_media>\n";
  meta_string = meta_string + "\n";
  meta_string = meta_string + "  <additive type='inducer'>\n";
  meta_string = meta_string + "    <name>";
  meta_string = meta_string + inducer_id;
  meta_string = meta_string + "</name>\n";
  meta_string = meta_string + "    <starting_stock>\n";
  meta_string = meta_string + "      <concentration>";
  inducer_conc_str = StrFStr(inducer_stock_concentration);
  meta_string = meta_string + inducer_conc_str;
  meta_string = meta_string + "</concentration>\n";
  meta_string = meta_string + "      <units>";
  meta_string = meta_string + inducer_units;
  meta_string = meta_string + "</units>\n";
  meta_string = meta_string + "    </starting_stock>\n";
  meta_string = meta_string + "  </additive>\n";
  meta_string = meta_string + "\n";
  meta_string = meta_string + "  <strains>\n";
  meta_string = meta_string + "    <strain number='1'>\n";
  meta_string = meta_string + "      <strain_id>";
  meta_string = meta_string + strain_1_id;
  meta_string = meta_string + "</strain_id>\n";
  meta_string = meta_string + "      <plasmid_id>";
  meta_string = meta_string + plasmid_1_id;
  meta_string = meta_string + "</plasmid_id>\n";
  meta_string = meta_string + "    </strain>\n";
  meta_string = meta_string + "    <strain number='2'>\n";
  meta_string = meta_string + "      <strain_id>";
  meta_string = meta_string + strain_2_id;
  meta_string = meta_string + "</strain_id>\n";
  meta_string = meta_string + "      <plasmid_id>";
  meta_string = meta_string + plasmid_2_id;
  meta_string = meta_string + "</plasmid_id>\n";
  meta_string = meta_string + "    </strain>\n";
  meta_string = meta_string + "  </strains>\n";
  meta_string = meta_string + "\n";
  meta_string = meta_string + "  <notes step='";
  meta_string = meta_string + step_str;
  meta_string = meta_string + "'>\n";
  meta_string = meta_string + "    ";
  meta_string = meta_string + exp_notes;
  meta_string = meta_string + "\n";
  meta_string = meta_string + "  </notes>\n";
  LMSF_UTILITIES::SaveToMetaDataFile(meta_file_path, experiment_name, step_str, 1, 1, worklist_file_path, year_string, month_string, day_string, start_time_str, meta_string);
}
