global device ML_STAR ("Prep cytometer plate from Inducer gradient plate.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Directory.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLTimLib.hsl" }
 namespace _Method { #include "..\\HSLTrcLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
#include "Prep cytometer plate from Inducer gradient plate.res"
variable conc_str;
variable plasmid_str;
variable strain_str;
variable loopCounter1;
variable property_array[];
variable antibiotic_id;
variable antibiotic_units;
variable antibiotic_conc;
variable input_worklist_path;
variable tip_counter_300_channels;
variable OD_str;
variable pipette_volume_str;
variable total_volume;
variable volume_arr[];
variable loopCounter3;
variable position;
variable pipette_volume;
variable OD_zero_str;
variable normalize_w_OD;
variable gen5_file;
variable output_worklist_path;
variable target_OD;
variable target_volume;
variable wavelength;
variable antibiotic_conc_str;
variable min_volume;
variable max_volume;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    LMSF_UTILITIES::_InitLibrary();
    COMMON96HEADSUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    GetParams();
    StartUp();
    total_volume = 200;
    MECC::TraceComment(Translate("=================================================\nPipette Focusing Fluid blanks and beads well\n================================================="));
    {
      sequence arrseqAspirate_1[];
      sequence arrseqDispense_1[];
      arrseqAspirate_1.SetSize(1);
      arrseqAspirate_1.SetAt(0, ML_STAR.FocusingFluid_source);
      arrseqDispense_1.SetSize(1);
      arrseqDispense_1.SetAt(0, ML_STAR.FF_blanks);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslFalse);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 5);
      PTL::SetPipettingState("DispenseMode", 1);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, arrseqAspirate_1, arrseqDispense_1, 1, 1, total_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.FocusingFluid_source, ML_STAR.FF_blanks) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    MECC::TraceComment(Translate("=================================================\nPipette PBS blanks\n================================================="));
    {
      sequence arrseqAspirate_2[];
      sequence arrseqDispense_2[];
      arrseqAspirate_2.SetSize(1);
      arrseqAspirate_2.SetAt(0, ML_STAR.PBS_source);
      arrseqDispense_2.SetSize(1);
      arrseqDispense_2.SetAt(0, ML_STAR.PBS_blanks);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 5);
      PTL::SetPipettingState("DispenseMode", 1);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, arrseqAspirate_2, arrseqDispense_2, 1, 1, total_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.PBS_source, ML_STAR.PBS_blanks) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    MECC::TraceComment(Translate("=================================================\nPipette PBS for bacteria samples\n================================================="));
    LMSF_UTILITIES::SeqCopyProperties(ML_STAR.Growth_Plate, property_array, ML_STAR.Bacteria_from_all);
    {
      loopCounter1 = 0;
      ML_STAR.Bacteria_from_all.SetCurrentPosition(1);
      ML_STAR.Bacteria_to_all.SetCurrentPosition(1);
      while (
         (ML_STAR.Bacteria_to_all.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Bacteria_from_all, 1, ML_STAR.Bacteria_to_all, 1);
        loopCounter1 = loopCounter1 + 1;
        LMSF_UTILITIES::SeqTransferProperties(ML_STAR.Bacteria_from_all, property_array, ML_STAR.Bacteria_to_all);
        SeqIncrement(ML_STAR.Bacteria_from_all, 1);
        SeqIncrement(ML_STAR.Bacteria_to_all, 1);
        if (
           (ML_STAR.Bacteria_to_all.GetCurrentPosition() > 0 && ML_STAR.Bacteria_to_all.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Bacteria_from_all.SetMax(ML_STAR.Bacteria_from_all.GetTotal());
      ML_STAR.Bacteria_to_all.SetMax(ML_STAR.Bacteria_to_all.GetTotal());
    }
    LMSF_UTILITIES::SeqCopyProperties(ML_STAR.Bacteria_to_all, property_array, ML_STAR.Round_bottom_cytometry_plate);
    if(0){
      LMSF_UTILITIES::TraceSeqProperties(ML_STAR.Round_bottom_cytometry_plate, property_array);
    }
    MECC::TraceComment(Translate("==============================================\nSet up volume_arr for pipetting PBS into cytometry plate\n=============================================="));
    volume_arr.SetSize(0);
    {
      loopCounter3 = 0;
      ML_STAR.Bacteria_to_all.SetCurrentPosition(1);
      while (
         (ML_STAR.Bacteria_to_all.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Bacteria_to_all, 1);
        loopCounter3 = loopCounter3 + 1;
        position = ML_STAR.Bacteria_to_all.GetCurrentPosition();
        pipette_volume = SeqGetProperty(ML_STAR.Bacteria_to_all, position, pipette_volume_str);
        pipette_volume = total_volume - pipette_volume;
        volume_arr.AddAsLast(pipette_volume);
        SeqIncrement(ML_STAR.Bacteria_to_all, 1);
        if (
           (ML_STAR.Bacteria_to_all.GetCurrentPosition() > 0 && ML_STAR.Bacteria_to_all.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Bacteria_to_all.SetMax(ML_STAR.Bacteria_to_all.GetTotal());
      ML_STAR.Bacteria_to_all.SetCurrentPosition(1);
    }
    {
      sequence arrseqAspirate_3[];
      sequence arrseqDispense_3[];
      arrseqAspirate_3.SetSize(1);
      arrseqAspirate_3.SetAt(0, ML_STAR.PBS_source_6);
      arrseqDispense_3.SetSize(1);
      arrseqDispense_3.SetAt(0, ML_STAR.Bacteria_to_all);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "01111110");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "01111110");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "01111110");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "01111110");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "01111110");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 5);
      PTL::SetPipettingState("DispenseMode", 1);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette4(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, arrseqAspirate_3, arrseqDispense_3, 1, 1, volume_arr, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.PBS_source_6, ML_STAR.Bacteria_to_all) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    LMSF_UTILITIES::SeqCopyProperties(ML_STAR.Round_bottom_cytometry_plate, property_array, ML_STAR.Bacteria_to_all);
    MECC::TraceComment(Translate("==============================================\nSet up volume_arr for pipetting bacteria into cytometry plate\n=============================================="));
    volume_arr.SetSize(0);
    {
      loopCounter3 = 0;
      ML_STAR.Bacteria_to_all.SetCurrentPosition(1);
      while (
         (ML_STAR.Bacteria_to_all.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Bacteria_to_all, 1);
        loopCounter3 = loopCounter3 + 1;
        position = ML_STAR.Bacteria_to_all.GetCurrentPosition();
        pipette_volume = SeqGetProperty(ML_STAR.Bacteria_to_all, position, pipette_volume_str);
        volume_arr.AddAsLast(pipette_volume);
        SeqIncrement(ML_STAR.Bacteria_to_all, 1);
        if (
           (ML_STAR.Bacteria_to_all.GetCurrentPosition() > 0 && ML_STAR.Bacteria_to_all.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Bacteria_to_all.SetMax(ML_STAR.Bacteria_to_all.GetTotal());
      ML_STAR.Bacteria_to_all.SetCurrentPosition(1);
    }
    {
      sequence arrseqAspirate_4[];
      sequence arrseqDispense_4[];
      arrseqAspirate_4.SetSize(1);
      arrseqAspirate_4.SetAt(0, ML_STAR.Bacteria_from_all);
      arrseqDispense_4.SetSize(1);
      arrseqDispense_4.SetAt(0, ML_STAR.Bacteria_to_all);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "01111110");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "01111110");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslFalse);
      PTL::SetPipettingState("TipEjectChannelVariable", "01111110");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "01111110");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("AspiratePrerinsingMixCycles", 4);
      PTL::SetPipettingState("AspiratePrerinsingMixPosition", 4);
      PTL::SetPipettingState("AspiratePrerinsingMixVolume", 280);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "01111110");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette4(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, arrseqAspirate_4, arrseqDispense_4, 1, 1, volume_arr, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Bacteria_from_all, ML_STAR.Bacteria_to_all) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    SaveWorklistAndMetadata();
    CleanUp();
    LMSF_UTILITIES::_ExitLibrary();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
  } }
