private function CleanUp(  ) void ;
private function SaveWorklistAndMetadata(  ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function StartUp(  ) void {
  private dialog customDialog_1;
  private variable User_choice;
  private variable plasmid;
  private variable strain;
  private variable concentration;
  private variable well;
  private file input_file;
  private variable growth_plate_id;
  private variable well_str;
  private variable loopCounter2;
  private variable antibiotic_prompt;
  private variable loopCounter4;
  private dialog customDialog_2;
  private variable file_list_length;
  private variable file_list[];
  private variable loopCounter5;
  private variable input_worklist_name;
  private variable meta_file_name;
  private dialog customDialog_3;
  private variable next_file;
  private variable file_found;
  private dialog customDialog_4;
  private dialog customDialog_5;
  private variable newest_subfolder;
  private dialog customDialog_6;
  private dialog customDialog_7;
  private dialog customDialog_8;
  private dialog customDialog_9;
  private dialog customDialog_10;
  private dialog customDialog_11;
  private dialog customDialog_12;
  private variable dialog_prompt;
  private dialog customDialog_13;
  private variable file_exists;
  private variable loopCounter6;
  private variable wavelength;
  private variable wavelength_exists;
  private dialog customDialog_14;
  private variable ok_to_procede;
  private dialog customDialog_15;
  private variable target_OD;
  private variable target_volume;
  private variable min_volume;
  private variable max_volume;
  private dialog customDialog_16;
  private variable loopCounter7;
  private variable OD;
  private variable const_offset;
  private variable const_offset_value;
  private variable well_by_well;
  private variable OD_zero;
  private variable delta_OD;
  private variable hour_str;
  private variable minute_str;
  customDialog_1.InitCustomDialog("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");
  customDialog_1.ShowCustomDialog();
  User_choice = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
  if (User_choice == 2)
  {
    abort;
  }
  year_string = TimGetFormattedDate("%Y");
  month_string = TimGetFormattedDate("%m");
  day_string = TimGetFormattedDate("%d");
  hour_str = TimGetFormattedTime("%H");
  minute_str = TimGetFormattedTime("%M");
  start_time_str = TimGetFormattedTime("%H:%M");
  worklist_folder_path = LMSF_UTILITIES::GetWorklistFolderPath();
  newest_subfolder = HSLExtensions::Directory::GetNewestSubFolderName(worklist_folder_path);
  worklist_folder_path = worklist_folder_path + newest_subfolder;
  customDialog_2.InitCustomDialog("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");
  customDialog_2.SetCustomDialogProperty( "path1.Path", worklist_folder_path );
  customDialog_2.ShowCustomDialog();
  User_choice = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
  worklist_folder_path = customDialog_2.GetCustomDialogProperty( "path1.Path" );
  if (User_choice == 2)
  {
    abort;
  }
  file_list = HSLExtensions::Directory::GetFileNames(worklist_folder_path);
  file_list_length=file_list.GetSize();
  input_worklist_name = "";
  meta_file_name = "";
  {
    for(loopCounter5 = 0; loopCounter5 < file_list_length;)
    {
      loopCounter5 = loopCounter5 + 1;
      next_file=file_list.GetAt(loopCounter5-1);
      file_found = StrFind(next_file, "cytometry plate.csv");
      if (file_found >= 0)
      {
        dialog_prompt = "The cytometry plate worklist, ";
        dialog_prompt = dialog_prompt + next_file;
        dialog_prompt = dialog_prompt + ", already exists.\nOk to overwrite?";
        customDialog_6.InitCustomDialog("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");
        customDialog_6.SetCustomDialogProperty( "textBlock.Text", dialog_prompt );
        customDialog_6.ShowCustomDialog();
        User_choice = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
        if (User_choice == 2)
        {
          abort;
        }
      }
      file_found = StrFind(next_file, "growth plate.csv");
      if (file_found >= 0)
      {
        input_worklist_name = next_file;
      }
      file_found = StrFind(next_file, "meta.txt");
      if (file_found >= 0)
      {
        meta_file_name = next_file;
      }
    }
  }
  if (input_worklist_name != "")
  {
    input_worklist_path = worklist_folder_path + "\\";
    input_worklist_path = input_worklist_path + input_worklist_name;
  }
  else
  {
  }
  if (meta_file_name != "")
  {
    meta_file_path = worklist_folder_path + "\\";
    meta_file_path = meta_file_path + meta_file_name;
  }
  else
  {
    customDialog_3.InitCustomDialog("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");
    customDialog_3.ShowCustomDialog();
    abort;
  }
  customDialog_4.InitCustomDialog("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");
  customDialog_4.SetCustomDialogProperty( "textBlock2.Text", input_worklist_name );
  customDialog_4.SetCustomDialogProperty( "textBlock4.Text", meta_file_name );
  customDialog_4.ShowCustomDialog();
  User_choice = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
  if (User_choice == 2)
  {
    abort;
  }
  conc_str = "concentration";
  strain_str = "strain";
  plasmid_str = "plasmid";
  well_str = "well";
  OD_str = "OD";
  OD_zero_str = "OD_zero";
  pipette_volume_str = "pipette_volume";
  property_array.SetSize(0);
  property_array.AddAsLast(conc_str);
  property_array.AddAsLast(strain_str);
  property_array.AddAsLast(plasmid_str);
  property_array.AddAsLast(OD_str);
  property_array.AddAsLast(OD_zero_str);
  property_array.AddAsLast(pipette_volume_str);
  input_file.AddField(well_str, well, hslString, 255);
  input_file.AddField(conc_str, concentration, hslFloat);
  input_file.AddField(strain_str, strain, hslString, 255);
  input_file.AddField(plasmid_str, plasmid, hslString, 255);
  input_file.SetDelimiter(hslCSVDelimited);
  if( 0 == input_file.Open(input_worklist_path, hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, input_worklist_path, "HxMetEdCompCmd");
  }
  growth_plate_id = SeqGetLabwareId(ML_STAR.Growth_Plate);
  {
    for(loopCounter2 = 0; loopCounter2 < 96;)
    {
      loopCounter2 = loopCounter2 + 1;
      if( 0 == input_file.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      LMSF_UTILITIES::SeqSetPropertyByWell(growth_plate_id, well, ML_STAR.Growth_Plate, conc_str, concentration);
      LMSF_UTILITIES::SeqSetPropertyByWell(growth_plate_id, well, ML_STAR.Growth_Plate, strain_str, strain);
      LMSF_UTILITIES::SeqSetPropertyByWell(growth_plate_id, well, ML_STAR.Growth_Plate, plasmid_str, plasmid);
    }
  }
  if( 0 != input_file.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  input_file.RemoveFields();
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, OD_str, 0);
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, OD_zero_str, 0);
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, pipette_volume_str, 0);
  SeqSetPropertyRange(ML_STAR.Round_bottom_cytometry_plate, 1, 96, OD_str, 0);
  SeqSetPropertyRange(ML_STAR.Round_bottom_cytometry_plate, 1, 96, OD_zero_str, 0);
  SeqSetPropertyRange(ML_STAR.Round_bottom_cytometry_plate, 1, 96, pipette_volume_str, 0);
  if(0){
    LMSF_UTILITIES::TraceSeqProperties(ML_STAR.Growth_Plate, property_array);
  }
  customDialog_13.InitCustomDialog("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");
  customDialog_13.ShowCustomDialog();
  normalize_w_OD = customDialog_13.GetCustomDialogProperty( "ReturnValue" );
  if (normalize_w_OD == 1)
  {
    gen5_file = worklist_folder_path + "\\";
    file_exists = 0;
    wavelength_exists = 0;
    ok_to_procede = 0;
    wavelength = 700;
    {
      loopCounter6 = 0;
      while (ok_to_procede == 0)
      {
        loopCounter6 = loopCounter6 + 1;
        customDialog_14.InitCustomDialog("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");
        customDialog_14.SetCustomDialogProperty( "path1.Path", gen5_file );
        customDialog_14.SetCustomDialogProperty( "numeric1.Value", wavelength );
        customDialog_14.ShowCustomDialog();
        gen5_file = customDialog_14.GetCustomDialogProperty( "path1.Path" );
        wavelength = customDialog_14.GetCustomDialogProperty( "numeric1.Value" );
        file_exists = HSLExtensions::File::Exists(gen5_file);
        wavelength_exists = 0;
        if (file_exists == 1)
        {
          wavelength_exists = LMSF_UTILITIES::ReadLastOD(gen5_file, ML_STAR.Growth_Plate, wavelength);
          if (wavelength_exists == 1)
          {
            ok_to_procede = 1;
          }
        }
      }
    }
    target_OD = 0.2;
    target_volume = 20;
    min_volume = 5;
    max_volume = 100;
    customDialog_15.InitCustomDialog("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");
    customDialog_15.SetCustomDialogProperty( "numeric1.Value", target_OD );
    customDialog_15.SetCustomDialogProperty( "numeric2.Value", target_volume );
    customDialog_15.SetCustomDialogProperty( "numeric3.Value", min_volume );
    customDialog_15.SetCustomDialogProperty( "numeric4.Value", max_volume );
    customDialog_15.ShowCustomDialog();
    User_choice = customDialog_15.GetCustomDialogProperty( "ReturnValue" );
    target_OD = customDialog_15.GetCustomDialogProperty( "numeric1.Value" );
    target_volume = customDialog_15.GetCustomDialogProperty( "numeric2.Value" );
    min_volume = customDialog_15.GetCustomDialogProperty( "numeric3.Value" );
    max_volume = customDialog_15.GetCustomDialogProperty( "numeric4.Value" );
    well_by_well = customDialog_15.GetCustomDialogProperty( "radioButton2.IsChecked" );
    const_offset = customDialog_15.GetCustomDialogProperty( "radioButton3.IsChecked" );
    const_offset_value = customDialog_15.GetCustomDialogProperty( "numeric5.Value" );
    if (User_choice == 2)
    {
      abort;
    }
    if (well_by_well == 1)
    {
      LMSF_UTILITIES::ReadFirstOD(gen5_file, ML_STAR.Growth_Plate, wavelength);
    }
    else
    {
      SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, OD_zero_str, const_offset_value);
    }
    {
      loopCounter7 = 0;
      ML_STAR.Growth_Plate.SetCurrentPosition(1);
      while (
         (ML_STAR.Growth_Plate.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Growth_Plate, 1);
        loopCounter7 = loopCounter7 + 1;
        position = ML_STAR.Growth_Plate.GetCurrentPosition();
        OD = SeqGetProperty(ML_STAR.Growth_Plate, position, OD_str);
        OD_zero = SeqGetProperty(ML_STAR.Growth_Plate, position, OD_zero_str);
        pipette_volume = target_volume;
        pipette_volume = pipette_volume * target_OD;
        delta_OD = OD - OD_zero;
        if (delta_OD > 0)
        {
          pipette_volume = pipette_volume / (delta_OD * 1.0);
        }
        else
        {
          pipette_volume = max_volume;
        }
        if (pipette_volume < min_volume)
        {
          pipette_volume = min_volume;
        }
        if (pipette_volume > max_volume)
        {
          pipette_volume = max_volume;
        }
        SeqSetProperty(ML_STAR.Growth_Plate, position, pipette_volume_str, pipette_volume);
        SeqIncrement(ML_STAR.Growth_Plate, 1);
        if (
           (ML_STAR.Growth_Plate.GetCurrentPosition() > 0 && ML_STAR.Growth_Plate.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Growth_Plate.SetMax(ML_STAR.Growth_Plate.GetTotal());
      ML_STAR.Growth_Plate.SetCurrentPosition(1);
    }
  }
  else
  {
    target_volume = 20;
    customDialog_16.InitCustomDialog("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");
    customDialog_16.SetCustomDialogProperty( "numeric2.Value", target_volume );
    customDialog_16.ShowCustomDialog();
    User_choice = customDialog_16.GetCustomDialogProperty( "ReturnValue" );
    target_volume = customDialog_16.GetCustomDialogProperty( "numeric2.Value" );
    if (User_choice == 2)
    {
      abort;
    }
    SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, pipette_volume_str, target_volume);
  }
  antibiotic_id = "";
  antibiotic_prompt = "Select the antibiotic used in the buffer for the cytometry plate:";
  {
    loopCounter3 = 0;
    while (antibiotic_id == "")
    {
      loopCounter3 = loopCounter3 + 1;
      antibiotic_id = LMSF_UTILITIES::GetMetaIdentifier("antibiotic", antibiotic_prompt);
    }
  }
  antibiotic_prompt = "Enter the concentration of ";
  antibiotic_prompt = antibiotic_prompt + antibiotic_id;
  antibiotic_prompt = antibiotic_prompt + Translate(" in the buffer:");
  antibiotic_conc = 0;
  antibiotic_conc_str = "";
  antibiotic_units = "";
  {
    loopCounter4 = 0;
    while (antibiotic_units == "")
    {
      loopCounter4 = loopCounter4 + 1;
      antibiotic_conc = LMSF_UTILITIES::GetAdditiveConcentration(antibiotic_id, antibiotic_prompt, antibiotic_units);
      antibiotic_conc_str = StrFStr(antibiotic_conc);
      antibiotic_conc_str = antibiotic_conc_str + " ";
      antibiotic_conc_str = antibiotic_conc_str + antibiotic_units;
    }
  }
  customDialog_5.InitCustomDialog("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");
  customDialog_5.ShowCustomDialog();
  exp_notes = customDialog_5.GetCustomDialogProperty( "textBox1.Text" );
  customDialog_7.InitCustomDialog("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");
  customDialog_7.ShowCustomDialog();
  User_choice = customDialog_7.GetCustomDialogProperty( "ReturnValue" );
  if (User_choice == 2)
  {
    abort;
  }
  tip_counter_300_channels = Translate("Tips_for_channels_300");
  TipCount::Edit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, tip_counter_300_channels, ML_STAR, 100);
  customDialog_8.InitCustomDialog("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");
  customDialog_8.ShowCustomDialog();
  User_choice = customDialog_8.GetCustomDialogProperty( "ReturnValue" );
  if (User_choice == 2)
  {
    abort;
  }
  customDialog_10.InitCustomDialog("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");
  customDialog_10.ShowCustomDialog();
  User_choice = customDialog_10.GetCustomDialogProperty( "ReturnValue" );
  if (User_choice == 2)
  {
    abort;
  }
  customDialog_11.InitCustomDialog("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");
  customDialog_11.ShowCustomDialog();
  User_choice = customDialog_11.GetCustomDialogProperty( "ReturnValue" );
  if (User_choice == 2)
  {
    abort;
  }
  customDialog_9.InitCustomDialog("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");
  customDialog_9.ShowCustomDialog();
  User_choice = customDialog_9.GetCustomDialogProperty( "ReturnValue" );
  if (User_choice == 2)
  {
    abort;
  }
  customDialog_12.InitCustomDialog("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");
  customDialog_12.ShowCustomDialog();
  User_choice = customDialog_12.GetCustomDialogProperty( "ReturnValue" );
  if (User_choice == 2)
  {
    abort;
  }
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
}

private function CleanUp(  ) void {
  TipCount::Write2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, tip_counter_300_channels, ML_STAR);
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR);
}

private function SaveWorklistAndMetadata(  ) void {
  private variable output_worklist_path;
  private variable end_position;
  private variable row_id;
  private variable well_id;
  private variable plasmid;
  private variable strain;
  private variable column_id;
  private file file1;
  private variable loopCounter2;
  private variable column_id_str;
  private variable meta_string;
  private variable inducer_conc;
  private variable step_str;
  private variable OD;
  private variable OD_zero;
  end_position = StrReverseFind(input_worklist_path, "_growth plate");
  output_worklist_path = StrLeft(input_worklist_path, end_position);
  output_worklist_path = output_worklist_path + "_cytom plate.csv";
  file1.AddField("position", position, hslInteger);
  file1.AddField("well", well_id, hslString, 255);
  file1.AddField("row", row_id, hslString, 255);
  file1.AddField("column", column_id, hslInteger);
  file1.AddField(conc_str, inducer_conc, hslFloat);
  file1.AddField(strain_str, strain, hslString, 255);
  file1.AddField(plasmid_str, plasmid, hslString, 255);
  file1.AddField(OD_str, OD, hslFloat);
  file1.AddField(OD_zero_str, OD_zero, hslFloat);
  file1.AddField(pipette_volume_str, pipette_volume, hslFloat);
  file1.SetDelimiter(hslCSVDelimited);
  if( 0 == file1.Open(output_worklist_path, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, output_worklist_path, "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    ML_STAR.Round_bottom_cytometry_plate.SetCurrentPosition(1);
    while (
       (ML_STAR.Round_bottom_cytometry_plate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.Round_bottom_cytometry_plate, 1);
      loopCounter2 = loopCounter2 + 1;
      position = ML_STAR.Round_bottom_cytometry_plate.GetCurrentPosition();
      well_id = SeqGetPositionId(ML_STAR.Round_bottom_cytometry_plate);
      row_id = StrLeft(well_id, 1);
      column_id_str = StrMid(well_id, 1, 2);
      column_id = StrIVal(column_id_str);
      inducer_conc = SeqGetProperty(ML_STAR.Round_bottom_cytometry_plate, position, conc_str);
      strain = SeqGetProperty(ML_STAR.Round_bottom_cytometry_plate, position, strain_str);
      plasmid = SeqGetProperty(ML_STAR.Round_bottom_cytometry_plate, position, plasmid_str);
      OD = SeqGetProperty(ML_STAR.Round_bottom_cytometry_plate, position, OD_str);
      OD_zero = SeqGetProperty(ML_STAR.Round_bottom_cytometry_plate, position, OD_zero_str);
      pipette_volume = SeqGetProperty(ML_STAR.Round_bottom_cytometry_plate, position, pipette_volume_str);
      if( 0 == file1.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      SeqIncrement(ML_STAR.Round_bottom_cytometry_plate, 1);
      if (
         (ML_STAR.Round_bottom_cytometry_plate.GetCurrentPosition() > 0 && ML_STAR.Round_bottom_cytometry_plate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.Round_bottom_cytometry_plate.SetMax(ML_STAR.Round_bottom_cytometry_plate.GetTotal());
    ML_STAR.Round_bottom_cytometry_plate.SetCurrentPosition(1);
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  meta_string = "";
  step_str = "cytometry plate prep";
  if (normalize_w_OD == 1)
  {
    meta_string = meta_string + "  <normalization_file step='";
    meta_string = meta_string + step_str;
    meta_string = meta_string + "'>\n    ";
    meta_string = meta_string + gen5_file;
    meta_string = meta_string + "\n  </normalization_file>\n";
    meta_string = meta_string + "\n";
  }
  meta_string = meta_string + "  <cytometry_buffer>\n";
  meta_string = meta_string + "    <additive type='antibiotic'>\n";
  meta_string = meta_string + "      <name>";
  meta_string = meta_string + antibiotic_id;
  meta_string = meta_string + "</name>\n";
  meta_string = meta_string + "      <concentration>";
  antibiotic_conc_str = StrFStr(antibiotic_conc);
  meta_string = meta_string + antibiotic_conc_str;
  meta_string = meta_string + "</concentration>\n";
  meta_string = meta_string + "      <units>";
  meta_string = meta_string + antibiotic_units;
  meta_string = meta_string + "</units>\n";
  meta_string = meta_string + "    </additive>\n";
  meta_string = meta_string + "  </cytometry_buffer>\n";
  meta_string = meta_string + "\n";
  meta_string = meta_string + "  <notes step='";
  meta_string = meta_string + step_str;
  meta_string = meta_string + "'>\n";
  meta_string = meta_string + "    ";
  meta_string = meta_string + exp_notes;
  meta_string = meta_string + "\n";
  meta_string = meta_string + "  </notes>\n";
  LMSF_UTILITIES::SaveToMetaDataFile(meta_file_path, Translate(""), step_str, 1, 1, output_worklist_path, year_string, month_string, day_string, start_time_str, meta_string);
}
