 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLExtensions\\Directory.hsl" }
 namespace _Method { #include "HSLTimLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
#include "Reader OD Linearity Calibration.res"
variable plasmid_1_id;
variable worklist_file_path;
variable strain_1_id;
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable culture_volume;
variable pipette_volume;
variable media_used;
variable is_debugging;
global device ML_STAR ("Reader OD Linearity Calibration.lay", "ML_STAR", hslTrue);
variable volume_ratio;
variable mix_volume;
variable plate_number;
dialog dialogHandle_1;
dialog dialogHandle_2;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    GetParams();
    StartUp();
    media_used = 0;
    volume_ratio = culture_volume / (500 * 1.0);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.ABGene_plate_0002_lid, ML_STAR.Lid_parking_ABGene_plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nPipette cells from old GP columns 5, 6, 7 and antibiotic into column 12 of new GP\n=============================================================="));
    if (is_pipetting == "true")
    {
      pipette_volume = culture_volume * 0.6;
      {
        sequence arrseqAspirate_3[];
        sequence arrseqDispense_3[];
        arrseqAspirate_3.SetSize(1);
        arrseqAspirate_3.SetAt(0, ML_STAR.Cells_from_old_GP_1);
        arrseqDispense_3.SetSize(1);
        arrseqDispense_3.SetAt(0, ML_STAR.Max_cell_density_1);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 5);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 11);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
        PTL::SetPipettingState("AspiratePrerinsingMixPosition", 2);
        PTL::SetPipettingState("AspiratePrerinsingMixVolume", pipette_volume);
        PTL::SetPipettingState("DispenseSubmergeDepth", 0);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
        PTL::SetPipettingState("DispenseFluidHeight", 3);
        PTL::SetPipettingState("DispenseMode", 3);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslFalse);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_3, arrseqDispense_3, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Cells_from_old_GP_1, ML_STAR.Max_cell_density_1) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
      pipette_volume = culture_volume * 0.2;
      {
        sequence arrseqAspirate_4[];
        sequence arrseqDispense_4[];
        arrseqAspirate_4.SetSize(1);
        arrseqAspirate_4.SetAt(0, ML_STAR.Antibiotic_stock);
        arrseqDispense_4.SetSize(1);
        arrseqDispense_4.SetAt(0, ML_STAR.Max_cell_density_antibiotic);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 3);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 0);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseSubmergeDepth", 2);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
        PTL::SetPipettingState("DispenseFluidHeight", 0);
        PTL::SetPipettingState("DispenseMode", 3);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_300_Channels, arrseqAspirate_4, arrseqDispense_4, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Antibiotic_stock, ML_STAR.Max_cell_density_antibiotic) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
      pipette_volume = culture_volume * 0.6;
      {
        sequence arrseqAspirate_5[];
        sequence arrseqDispense_5[];
        arrseqAspirate_5.SetSize(1);
        arrseqAspirate_5.SetAt(0, ML_STAR.Cells_from_old_GP_2);
        arrseqDispense_5.SetSize(1);
        arrseqDispense_5.SetAt(0, ML_STAR.Max_cell_density_2);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 5);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 11);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
        PTL::SetPipettingState("AspiratePrerinsingMixPosition", 2);
        PTL::SetPipettingState("AspiratePrerinsingMixVolume", pipette_volume);
        PTL::SetPipettingState("DispenseSubmergeDepth", 2);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
        PTL::SetPipettingState("DispenseFluidHeight", 0);
        PTL::SetPipettingState("DispenseMode", 3);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        PTL::SetPipettingState("DispensePrerinsingMixCycles", 1);
        PTL::SetPipettingState("DispensePrerinsingMixPosition", 1);
        PTL::SetPipettingState("DispensePrerinsingMixVolume", pipette_volume);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_5, arrseqDispense_5, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Cells_from_old_GP_2, ML_STAR.Max_cell_density_2) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
      {
        sequence arrseqAspirate_6[];
        sequence arrseqDispense_6[];
        arrseqAspirate_6.SetSize(1);
        arrseqAspirate_6.SetAt(0, ML_STAR.Cells_from_old_GP_3);
        arrseqDispense_6.SetSize(1);
        arrseqDispense_6.SetAt(0, ML_STAR.Max_cell_density_3);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 5);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 11);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
        PTL::SetPipettingState("AspiratePrerinsingMixPosition", 2);
        PTL::SetPipettingState("AspiratePrerinsingMixVolume", pipette_volume);
        PTL::SetPipettingState("DispenseSubmergeDepth", 2);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
        PTL::SetPipettingState("DispenseFluidHeight", 0);
        PTL::SetPipettingState("DispenseMode", 3);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        PTL::SetPipettingState("DispensePrerinsingMixCycles", 1);
        PTL::SetPipettingState("DispensePrerinsingMixPosition", 1);
        PTL::SetPipettingState("DispensePrerinsingMixVolume", pipette_volume);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_6, arrseqDispense_6, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Cells_from_old_GP_3, ML_STAR.Max_cell_density_3) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_2.SetOutput(Translate("growth plate and old GP"), "\n");
        dialogHandle_2.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    MECC::TraceComment(Translate("==============================================================\nPipette cell gradient\n=============================================================="));
    if (is_pipetting == "true")
    {
      mix_volume = culture_volume * 1.5;
      if (plate_number == 1)
      {
        {
          sequence arrseqAspirate_7[];
          sequence arrseqDispense_7[];
          arrseqAspirate_7.SetSize(1);
          arrseqAspirate_7.SetAt(0, ML_STAR.Bacteria_dilution_from);
          arrseqDispense_7.SetSize(1);
          arrseqDispense_7.SetAt(0, ML_STAR.Bacteria_dilution_to_1);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 3);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 0);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixVolume", mix_volume);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslTrue);
          PTL::SetPipettingState("DispenseSequenceReducible", hslTrue);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_7, arrseqDispense_7, 1, 1, culture_volume, 0, 1, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Bacteria_dilution_from, ML_STAR.Bacteria_dilution_to_1) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
      if (plate_number == 2)
      {
        {
          sequence arrseqAspirate_8[];
          sequence arrseqDispense_8[];
          arrseqAspirate_8.SetSize(1);
          arrseqAspirate_8.SetAt(0, ML_STAR.Bacteria_dilution_from);
          arrseqDispense_8.SetSize(1);
          arrseqDispense_8.SetAt(0, ML_STAR.Bacteria_dilution_to_2);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 3);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 0);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixVolume", mix_volume);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslTrue);
          PTL::SetPipettingState("DispenseSequenceReducible", hslTrue);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_8, arrseqDispense_8, 1, 1, culture_volume, 0, 1, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Bacteria_dilution_from, ML_STAR.Bacteria_dilution_to_2) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
      if (plate_number == 3)
      {
        {
          sequence arrseqAspirate_9[];
          sequence arrseqDispense_9[];
          arrseqAspirate_9.SetSize(1);
          arrseqAspirate_9.SetAt(0, ML_STAR.Bacteria_dilution_from);
          arrseqDispense_9.SetSize(1);
          arrseqDispense_9.SetAt(0, ML_STAR.Bacteria_dilution_to_3);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 3);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 0);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixVolume", mix_volume);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslTrue);
          PTL::SetPipettingState("DispenseSequenceReducible", hslTrue);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_9, arrseqDispense_9, 1, 1, culture_volume, 0, 1, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Bacteria_dilution_from, ML_STAR.Bacteria_dilution_to_3) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
      if (plate_number == 4)
      {
        {
          sequence arrseqAspirate_10[];
          sequence arrseqDispense_10[];
          arrseqAspirate_10.SetSize(1);
          arrseqAspirate_10.SetAt(0, ML_STAR.Bacteria_dilution_from);
          arrseqDispense_10.SetSize(1);
          arrseqDispense_10.SetAt(0, ML_STAR.Bacteria_dilution_to_4);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 3);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 0);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixVolume", mix_volume);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslTrue);
          PTL::SetPipettingState("DispenseSequenceReducible", hslTrue);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_10, arrseqDispense_10, 1, 1, culture_volume, 0, 1, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Bacteria_dilution_from, ML_STAR.Bacteria_dilution_to_4) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_1.SetOutput(Translate("growth plate and Abgene plate"), "\n");
        dialogHandle_1.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_ABGene_plate, ML_STAR.ABGene_plate_0002_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Old_Growth_Plate_park, ML_STAR.Old_Growth_Plate_parking_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Old_Growth_Plate_parking_lid, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_Handoff_lid_2, ML_STAR.Old_Growth_Plate_parking_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLidNoTap(ML_STAR.Move_Old_Growth_Plate_park, ML_STAR.Old_Growth_Plate_parking_lid, ML_STAR.Growth_Plate_waste, ML_STAR.Growth_Plate_waste_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
  } }
