//isPipetting is a variable passed to the Hamilton Venus method; if isPipetting is true, the STAR will pipette liquids; otherwise the STAR just moves plates around
Set(isPipetting, true)
//isDebugging controls whether or not user debugging prompts/messages are displayed (both in LMSF and Hamilton)
Set(isDebugging, false)

Set(cultureVolume, 500)

StartPrompt(Reader OD Linearity Calibration, C:\Program Files (x86)\HAMILTON\Methods\GSF-IMS Project\Reader OD Linearity Calibration\Reader OD Linearity Calibration-list.txt)

NewXML(growth plate prep)

Get(user, user)

Get(media, media)

Get(strain, strain1, Select the bacteria strain used for the protocol:)
Get(plasmid, plasmid1, Select the plasmid used for the protocol:)

Get(antibiotic, antibiotic, Select the antibiotic used in the media for the OD dilution plate:)
Get(concentration, antibioticStock, Enter the concentration of the {antibiotic} stock solution:)

Get(note, note)

GetExpID({startDate}_{strain1}_OD-Linearity)

Set(worklistFile, {dataDirectory}\{experimentId}_growth plate.csv)

//review experiment ok/abort dialog
Set(msg1, Review the following, then click 'OK' to accept or 'Abort' to abort and start over:\n\n)
Set(msg2, \tMedia: \t\t\t{media}\n\n \tBacteria: \t\t\t{strain1}, with {plasmid1}\n\n)
Set(msg3, \tAntibiotic: \t\t\t{antibiotic}, stock concentration: {antibioticStock}\n)
Set(msg5, \tExperiment ID: \n\t\t{experimentId}\n \tData directory: \n\t\t{dataDirectory}\n\n \tNotes:\n\t\t{note})
UserPrompt(Review Protocol Details: {experimentId}, {msg1} {msg2} {msg3} {msg5})

Hamilton(C:\Program Files (x86)\HAMILTON\Methods\Common\Tip Handling\With 96-Head\Edit Tip Counters.hsl)
WaitFor(Hamilton) 

Set(msg1, Close the front cover on the STAR, then click 'OK' to start the method.)
UserPrompt(Close Cover and Start, {msg1}, C:\Program Files (x86)\HAMILTON\LMSF_FrontEnd\Image files\dialog-warning.png)

//Prep growth plate 1 for 8 hour growth
Set(plateNumber, 1)

Hamilton(C:\Program Files (x86)\HAMILTON\Methods\GSF-IMS Project\Reader OD Linearity Calibration\Starting plate with bacteria.hsl)
WaitFor(Hamilton) 
AddXML(hamiltonMethod, outputWorklistFile, {worklistFile})

UserPrompt(Pause, Pause for testing)

//Prep growth plate 2 for 8 hour growth
Set(plateNumber, 2)

Hamilton(C:\Program Files (x86)\HAMILTON\Methods\GSF-IMS Project\Reader OD Linearity Calibration\Starting plate with bacteria.hsl)
WaitFor(Hamilton) 
AddXML(hamiltonMethod, outputWorklistFile, {worklistFile})

UserPrompt(Pause, Pause for testing)


//Prep cell dilution plate 1
Set(plateNumber, 1)

Hamilton(C:\Program Files (x86)\HAMILTON\Methods\GSF-IMS Project\Reader OD Linearity Calibration\Prep cell dilution plate with antibiotic but no cells.hsl)
WaitFor(Hamilton) 

UserPrompt(Pause, Pause for testing)

//Take growth plate 1 out, pipette cell dilution gradient, put new plate 1 back in reader
Hamilton(C:\Program Files (x86)\HAMILTON\Methods\GSF-IMS Project\Reader OD Linearity Calibration\Cells from old GP to dilution plate.hsl)
WaitFor(Hamilton) 

UserPrompt(Pause, Pause for testing)


//Prep cell dilution plate 2
Set(plateNumber, 2)

Hamilton(C:\Program Files (x86)\HAMILTON\Methods\GSF-IMS Project\Reader OD Linearity Calibration\Prep cell dilution plate with antibiotic but no cells.hsl)
WaitFor(Hamilton) 

UserPrompt(Pause, Pause for testing)

//Take growth plate 2 out, pipette cell dilution gradient, put new plate 2 back in reader
Hamilton(C:\Program Files (x86)\HAMILTON\Methods\GSF-IMS Project\Reader OD Linearity Calibration\Cells from old GP to dilution plate.hsl)
WaitFor(Hamilton) 


SaveXML()