 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLExtensions\\Directory.hsl" }
 namespace _Method { #include "HSLTimLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
#include "Reader OD Linearity Calibration.res"
variable plasmid_1_id;
variable worklist_file_path;
variable strain_1_id;
variable strain_str;
variable plasmid_str;
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable culture_volume;
variable pipette_volume;
variable media_used;
variable next_media;
variable is_debugging;
dialog dialogHandle_1;
global device ML_STAR ("Reader OD Linearity Calibration.lay", "ML_STAR", hslTrue);
dialog dialogHandle_2;
variable volume_ratio;
dialog dialogHandle_3;
variable mix_volume;
variable volume_left;
variable loopCounter3;
variable plate_number;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    GetParams();
    StartUp();
    media_used = 0;
    volume_ratio = culture_volume / (500 * 1.0);
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_source_lid, ML_STAR.Lid_parking_Media_trough, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate.\n=============================================================="));
    if (is_pipetting == "true")
    {
      pipette_volume = culture_volume * 0.9;
      {
        sequence arrseqAspirate_4[];
        sequence arrseqDispense_4[];
        arrseqAspirate_4.SetSize(1);
        arrseqAspirate_4.SetAt(0, ML_STAR.Media_source);
        arrseqDispense_4.SetSize(1);
        arrseqDispense_4.SetAt(0, ML_STAR.Media_dispense);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 5);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 11);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseSubmergeDepth", 0);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
        PTL::SetPipettingState("DispenseFluidHeight", 5);
        PTL::SetPipettingState("DispenseMode", 1);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_4, arrseqDispense_4, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, ML_STAR.Media_dispense) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
      next_media = pipette_volume * 96;
      media_used = media_used + next_media;
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_1.SetOutput(Translate("media into growth plate"), "\n");
        dialogHandle_1.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.ABGene_plate_0002_lid, ML_STAR.Lid_parking_ABGene_plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nPipette media for bacterial dilutions\n=============================================================="));
    if (is_pipetting == "true")
    {
      pipette_volume = volume_ratio * 810;
      if (plate_number == 1)
      {
        {
          sequence arrseqAspirate_5[];
          sequence arrseqDispense_5[];
          sequence seqMergedDispense_5;
          arrseqAspirate_5.SetSize(1);
          arrseqAspirate_5.SetAt(0, ML_STAR.Media_source);
          arrseqDispense_5.SetSize(2);
          arrseqDispense_5.SetAt(0, ML_STAR.Bacteria_all_100x_1);
          arrseqDispense_5.SetAt(1, ML_STAR.Bacteria_all_10x_1);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 0);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
          PTL::SetPipettingState("DispenseFluidHeight", 5);
          PTL::SetPipettingState("DispenseMode", 1);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_5, arrseqDispense_5, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, seqMergedDispense_5) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
      if (plate_number == 2)
      {
        {
          sequence arrseqAspirate_6[];
          sequence arrseqDispense_6[];
          sequence seqMergedDispense_6;
          arrseqAspirate_6.SetSize(1);
          arrseqAspirate_6.SetAt(0, ML_STAR.Media_source);
          arrseqDispense_6.SetSize(2);
          arrseqDispense_6.SetAt(0, ML_STAR.Bacteria_all_100x_2);
          arrseqDispense_6.SetAt(1, ML_STAR.Bacteria_all_10x_2);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 0);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
          PTL::SetPipettingState("DispenseFluidHeight", 5);
          PTL::SetPipettingState("DispenseMode", 1);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_6, arrseqDispense_6, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, seqMergedDispense_6) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
      if (plate_number == 3)
      {
        {
          sequence arrseqAspirate_7[];
          sequence arrseqDispense_7[];
          sequence seqMergedDispense_7;
          arrseqAspirate_7.SetSize(1);
          arrseqAspirate_7.SetAt(0, ML_STAR.Media_source);
          arrseqDispense_7.SetSize(2);
          arrseqDispense_7.SetAt(0, ML_STAR.Bacteria_all_100x_3);
          arrseqDispense_7.SetAt(1, ML_STAR.Bacteria_all_10x_3);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 0);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
          PTL::SetPipettingState("DispenseFluidHeight", 5);
          PTL::SetPipettingState("DispenseMode", 1);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_7, arrseqDispense_7, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, seqMergedDispense_7) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
      if (plate_number == 4)
      {
        {
          sequence arrseqAspirate_8[];
          sequence arrseqDispense_8[];
          sequence seqMergedDispense_8;
          arrseqAspirate_8.SetSize(1);
          arrseqAspirate_8.SetAt(0, ML_STAR.Media_source);
          arrseqDispense_8.SetSize(2);
          arrseqDispense_8.SetAt(0, ML_STAR.Bacteria_all_100x_4);
          arrseqDispense_8.SetAt(1, ML_STAR.Bacteria_all_10x_4);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 0);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
          PTL::SetPipettingState("DispenseFluidHeight", 5);
          PTL::SetPipettingState("DispenseMode", 1);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_8, arrseqDispense_8, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, seqMergedDispense_8) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_2.SetOutput(Translate("media for bacteria dilutions into Abgene plate"), "\n");
        dialogHandle_2.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Media_trough, ML_STAR.Media_source_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nDilute bacteria in two steps, then pipette into growth plate\n=============================================================="));
    if (is_pipetting == "true")
    {
      if (plate_number == 1)
      {
        pipette_volume = volume_ratio * 90;
        {
          sequence arrseqAspirate_9[];
          sequence arrseqDispense_9[];
          arrseqAspirate_9.SetSize(1);
          arrseqAspirate_9.SetAt(0, ML_STAR.Bacteria_stock_1);
          arrseqDispense_9.SetSize(1);
          arrseqDispense_9.SetAt(0, ML_STAR.Bacteria_all_100x_1);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3.5);
          PTL::SetPipettingState("AspiratePrerinsingMixVolume", 300);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          PTL::SetPipettingState("DispensePrerinsingMixCycles", 2);
          PTL::SetPipettingState("DispensePrerinsingMixPosition", 2);
          PTL::SetPipettingState("DispensePrerinsingMixVolume", 800);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_9, arrseqDispense_9, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Bacteria_stock_1, ML_STAR.Bacteria_all_100x_1) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
        {
          sequence arrseqAspirate_10[];
          sequence arrseqDispense_10[];
          arrseqAspirate_10.SetSize(1);
          arrseqAspirate_10.SetAt(0, ML_STAR.Bacteria_all_100x_1);
          arrseqDispense_10.SetSize(1);
          arrseqDispense_10.SetAt(0, ML_STAR.Bacteria_all_10x_1);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixPosition", 5);
          PTL::SetPipettingState("AspiratePrerinsingMixVolume", 650);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          PTL::SetPipettingState("DispensePrerinsingMixCycles", 2);
          PTL::SetPipettingState("DispensePrerinsingMixPosition", 3.5);
          PTL::SetPipettingState("DispensePrerinsingMixVolume", 650);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_10, arrseqDispense_10, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Bacteria_all_100x_1, ML_STAR.Bacteria_all_10x_1) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
        volume_left = volume_ratio * 900;
        pipette_volume = volume_ratio * 50;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        {
          loopCounter3 = 0;
          while (
             (ML_STAR.Bacteria_pipette_to.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, ML_STAR.Bacteria_all_10x_1, 1, ML_STAR.Bacteria_pipette_to, 1);
            loopCounter3 = loopCounter3 + 1;
            ML_STAR.Bacteria_all_10x_1.SetCurrentPosition(1);
            mix_volume = volume_left - 100;
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            volume_left = volume_left - pipette_volume;
            if (
               (ML_STAR.Bacteria_pipette_to.GetCurrentPosition() > 0 && ML_STAR.Bacteria_pipette_to.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          ML_STAR.Bacteria_all_10x_1.SetMax(ML_STAR.Bacteria_all_10x_1.GetTotal());
          ML_STAR.Bacteria_pipette_to.SetMax(ML_STAR.Bacteria_pipette_to.GetTotal());
          ML_STAR.Bacteria_all_10x_1.SetCurrentPosition(1);
          ML_STAR.Bacteria_pipette_to.SetCurrentPosition(1);
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
      if (plate_number == 2)
      {
        pipette_volume = volume_ratio * 90;
        {
          sequence arrseqAspirate_11[];
          sequence arrseqDispense_11[];
          arrseqAspirate_11.SetSize(1);
          arrseqAspirate_11.SetAt(0, ML_STAR.Bacteria_stock_1);
          arrseqDispense_11.SetSize(1);
          arrseqDispense_11.SetAt(0, ML_STAR.Bacteria_all_100x_2);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3.5);
          PTL::SetPipettingState("AspiratePrerinsingMixVolume", 300);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          PTL::SetPipettingState("DispensePrerinsingMixCycles", 2);
          PTL::SetPipettingState("DispensePrerinsingMixPosition", 2);
          PTL::SetPipettingState("DispensePrerinsingMixVolume", 800);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_11, arrseqDispense_11, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Bacteria_stock_1, ML_STAR.Bacteria_all_100x_2) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
        {
          sequence arrseqAspirate_12[];
          sequence arrseqDispense_12[];
          arrseqAspirate_12.SetSize(1);
          arrseqAspirate_12.SetAt(0, ML_STAR.Bacteria_all_100x_2);
          arrseqDispense_12.SetSize(1);
          arrseqDispense_12.SetAt(0, ML_STAR.Bacteria_all_10x_2);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixPosition", 5);
          PTL::SetPipettingState("AspiratePrerinsingMixVolume", 650);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          PTL::SetPipettingState("DispensePrerinsingMixCycles", 2);
          PTL::SetPipettingState("DispensePrerinsingMixPosition", 3.5);
          PTL::SetPipettingState("DispensePrerinsingMixVolume", 650);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_12, arrseqDispense_12, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Bacteria_all_100x_2, ML_STAR.Bacteria_all_10x_2) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
        volume_left = volume_ratio * 900;
        pipette_volume = volume_ratio * 50;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        {
          loopCounter3 = 0;
          while (
             (ML_STAR.Bacteria_pipette_to.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, ML_STAR.Bacteria_all_10x_2, 1, ML_STAR.Bacteria_pipette_to, 1);
            loopCounter3 = loopCounter3 + 1;
            ML_STAR.Bacteria_all_10x_2.SetCurrentPosition(1);
            mix_volume = volume_left - 100;
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            volume_left = volume_left - pipette_volume;
            if (
               (ML_STAR.Bacteria_pipette_to.GetCurrentPosition() > 0 && ML_STAR.Bacteria_pipette_to.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          ML_STAR.Bacteria_all_10x_2.SetMax(ML_STAR.Bacteria_all_10x_2.GetTotal());
          ML_STAR.Bacteria_pipette_to.SetMax(ML_STAR.Bacteria_pipette_to.GetTotal());
          ML_STAR.Bacteria_all_10x_2.SetCurrentPosition(1);
          ML_STAR.Bacteria_pipette_to.SetCurrentPosition(1);
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
      if (plate_number == 3)
      {
        pipette_volume = volume_ratio * 90;
        {
          sequence arrseqAspirate_13[];
          sequence arrseqDispense_13[];
          arrseqAspirate_13.SetSize(1);
          arrseqAspirate_13.SetAt(0, ML_STAR.Bacteria_stock_1);
          arrseqDispense_13.SetSize(1);
          arrseqDispense_13.SetAt(0, ML_STAR.Bacteria_all_100x_3);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3.5);
          PTL::SetPipettingState("AspiratePrerinsingMixVolume", 300);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          PTL::SetPipettingState("DispensePrerinsingMixCycles", 2);
          PTL::SetPipettingState("DispensePrerinsingMixPosition", 2);
          PTL::SetPipettingState("DispensePrerinsingMixVolume", 800);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_13, arrseqDispense_13, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Bacteria_stock_1, ML_STAR.Bacteria_all_100x_3) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
        {
          sequence arrseqAspirate_14[];
          sequence arrseqDispense_14[];
          arrseqAspirate_14.SetSize(1);
          arrseqAspirate_14.SetAt(0, ML_STAR.Bacteria_all_100x_3);
          arrseqDispense_14.SetSize(1);
          arrseqDispense_14.SetAt(0, ML_STAR.Bacteria_all_10x_3);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixPosition", 5);
          PTL::SetPipettingState("AspiratePrerinsingMixVolume", 650);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          PTL::SetPipettingState("DispensePrerinsingMixCycles", 2);
          PTL::SetPipettingState("DispensePrerinsingMixPosition", 3.5);
          PTL::SetPipettingState("DispensePrerinsingMixVolume", 650);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_14, arrseqDispense_14, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Bacteria_all_100x_3, ML_STAR.Bacteria_all_10x_3) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
        volume_left = volume_ratio * 900;
        pipette_volume = volume_ratio * 50;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        {
          loopCounter3 = 0;
          while (
             (ML_STAR.Bacteria_pipette_to.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, ML_STAR.Bacteria_all_10x_3, 1, ML_STAR.Bacteria_pipette_to, 1);
            loopCounter3 = loopCounter3 + 1;
            ML_STAR.Bacteria_all_10x_3.SetCurrentPosition(1);
            mix_volume = volume_left - 100;
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            volume_left = volume_left - pipette_volume;
            if (
               (ML_STAR.Bacteria_pipette_to.GetCurrentPosition() > 0 && ML_STAR.Bacteria_pipette_to.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          ML_STAR.Bacteria_all_10x_3.SetMax(ML_STAR.Bacteria_all_10x_3.GetTotal());
          ML_STAR.Bacteria_pipette_to.SetMax(ML_STAR.Bacteria_pipette_to.GetTotal());
          ML_STAR.Bacteria_all_10x_3.SetCurrentPosition(1);
          ML_STAR.Bacteria_pipette_to.SetCurrentPosition(1);
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
      if (plate_number == 4)
      {
        pipette_volume = volume_ratio * 90;
        {
          sequence arrseqAspirate_15[];
          sequence arrseqDispense_15[];
          arrseqAspirate_15.SetSize(1);
          arrseqAspirate_15.SetAt(0, ML_STAR.Bacteria_stock_1);
          arrseqDispense_15.SetSize(1);
          arrseqDispense_15.SetAt(0, ML_STAR.Bacteria_all_100x_4);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3.5);
          PTL::SetPipettingState("AspiratePrerinsingMixVolume", 300);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          PTL::SetPipettingState("DispensePrerinsingMixCycles", 2);
          PTL::SetPipettingState("DispensePrerinsingMixPosition", 2);
          PTL::SetPipettingState("DispensePrerinsingMixVolume", 800);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_15, arrseqDispense_15, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Bacteria_stock_1, ML_STAR.Bacteria_all_100x_4) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
        {
          sequence arrseqAspirate_16[];
          sequence arrseqDispense_16[];
          arrseqAspirate_16.SetSize(1);
          arrseqAspirate_16.SetAt(0, ML_STAR.Bacteria_all_100x_4);
          arrseqDispense_16.SetSize(1);
          arrseqDispense_16.SetAt(0, ML_STAR.Bacteria_all_10x_4);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 5);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 11);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
          PTL::SetPipettingState("AspiratePrerinsingMixPosition", 5);
          PTL::SetPipettingState("AspiratePrerinsingMixVolume", 650);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          PTL::SetPipettingState("DispensePrerinsingMixCycles", 2);
          PTL::SetPipettingState("DispensePrerinsingMixPosition", 3.5);
          PTL::SetPipettingState("DispensePrerinsingMixVolume", 650);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_16, arrseqDispense_16, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Bacteria_all_100x_4, ML_STAR.Bacteria_all_10x_4) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
        volume_left = volume_ratio * 900;
        pipette_volume = volume_ratio * 50;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        {
          loopCounter3 = 0;
          while (
             (ML_STAR.Bacteria_pipette_to.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, ML_STAR.Bacteria_all_10x_4, 1, ML_STAR.Bacteria_pipette_to, 1);
            loopCounter3 = loopCounter3 + 1;
            ML_STAR.Bacteria_all_10x_4.SetCurrentPosition(1);
            mix_volume = volume_left - 100;
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            volume_left = volume_left - pipette_volume;
            if (
               (ML_STAR.Bacteria_pipette_to.GetCurrentPosition() > 0 && ML_STAR.Bacteria_pipette_to.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          ML_STAR.Bacteria_all_10x_4.SetMax(ML_STAR.Bacteria_all_10x_4.GetTotal());
          ML_STAR.Bacteria_pipette_to.SetMax(ML_STAR.Bacteria_pipette_to.GetTotal());
          ML_STAR.Bacteria_all_10x_4.SetCurrentPosition(1);
          ML_STAR.Bacteria_pipette_to.SetCurrentPosition(1);
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_3.SetOutput(Translate("cells from Abgene plate to growth plate"), "\n");
        dialogHandle_3.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_ABGene_plate, ML_STAR.ABGene_plate_0002_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLidNoTap(ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Waste_Growth_Plate_Lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    TrcTrace(Translate("Media used:"), media_used);
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CalculateOutputs();
    SaveWorklistAndMetadata();
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
  } }
