 namespace _Method { #include "HSLMPELib.hsl" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "DPXSmartHelper\\TipLength\\DPXPreCuttedTipsLib.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "Common\\MPE_Library.hs_" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "Hamilton HeaterCooler\\HamiltonHeaterCooler.hsl" }
#include "Spin plate remove supernatant.res"
variable _blnSimulationMode;
variable loopCounter1;
variable culture_volume;
variable pipette_volume_1;
variable is_pipetting;
variable is_debugging;
variable tip_counter_array[];
variable offest_tip_pos;
global device ML_STAR ("Spin plate remove supernatant.lay", "ML_STAR", hslTrue);
sequence tip_seq_arr[];
dialog dialogHandle_1;
variable pipette_volume_2;
variable pipette_volume_3;
variable repipette_volume;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    PLATEANDLIDMOVEMENT::_InitLibrary();
    COMMON96HEADSUBMETHODS::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    DPXPRECUTTEDTIPSLIB::_InitLibrary();
    MPE_LIBRARY::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("*********************************************************************************************************************\nThis method removes the supernatant from the left-most tree columns of a spin plate after cells have been pelleted.\n\n\n*********************************************************************************************************************"));
    StartUp();
    culture_volume = 500;
    MECC::TraceComment(Translate("************************************************************************************************\nRemove supernatant from Spin plate and throw away (in adjacent wells in Spin Plate)\n\n************************************************************************************************"));
    pipette_volume_1 = 1000;
    pipette_volume_2 = culture_volume * 3.6;
    pipette_volume_3 = pipette_volume_2 - pipette_volume_1;
    TrcTrace("pipette_volume_1: ", pipette_volume_1);
    TrcTrace("pipette_volume_3: ", pipette_volume_3);
    repipette_volume = 200;
    {
      loopCounter1 = 0;
      while (
         (ML_STAR.Spin_Plate_liquid_waste.GetCurrentPosition() > 0)
      && (ML_STAR.Spin_Plate_supernatant.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Spin_Plate_liquid_waste, 1, ML_STAR.Spin_Plate_supernatant, 1);
        loopCounter1 = loopCounter1 + 1;
        PTL::ResetTipHandlingState();
        PTL::SetTipHandlingState("UserResponseTime", 0);
        PTL::SetTipHandlingState("ErrorHandling", 3);
        PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
        PTL::SetTipHandlingState("TipCountingIdentifier", "");
        PTL::SetTipHandlingState("InitializeCustomStepID", 0);
        PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
        PTL::SetTipHandlingState("TipPickupChannelVariable", "");
        PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
        if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_1000_Channels) )
        {
              PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        PTL::ResetTipHandlingState();
        PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
        PTL::SetTipHandlingState("ErrorHandling", 3);
        PTL::SetTipHandlingState("InitializeCustomStepID", 0);
        PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
        PTL::SetTipHandlingState("TipEjectChannelVariable", "");
        if( 0 == PTL::TipEject(ML_STAR) )
        {
              PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
        if (
           (ML_STAR.Spin_Plate_liquid_waste.GetCurrentPosition() > 0 && ML_STAR.Spin_Plate_liquid_waste.GetMax() == 0 )
        && (ML_STAR.Spin_Plate_supernatant.GetCurrentPosition() > 0 && ML_STAR.Spin_Plate_supernatant.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Spin_Plate_liquid_waste.SetMax(ML_STAR.Spin_Plate_liquid_waste.GetTotal());
      ML_STAR.Spin_Plate_supernatant.SetMax(ML_STAR.Spin_Plate_supernatant.GetTotal());
      ML_STAR.Spin_Plate_liquid_waste.SetCurrentPosition(1);
      ML_STAR.Spin_Plate_supernatant.SetCurrentPosition(1);
    }
    CleanUp();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    DPXPRECUTTEDTIPSLIB::_ExitLibrary();
    MPE_LIBRARY::_ExitLibrary();
  } }
