private function CalculateOutputs(  ) void ;
private function CleanUp(  ) void ;
private function GetParams(  ) void ;
private function SaveWorklistAndMetadata(  ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function CleanUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        TipCount::Write2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        TipCount::Write2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        TipCount::Write2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 4)
      {
        TipCount::Write2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR);
}

private function StartUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  TIP_HANDLING_WITH_96_HEAD::GetTipCounters(tip_counter_array, 1);
  tip_seq_arr.SetSize(0);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_300_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_50_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Offset_pickup);
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 4)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
}

private function CalculateOutputs(  ) void {
  private variable inducer_conc;
  private variable well_id;
  private variable labware_id;
  private variable loopCounter3;
  private variable loopCounter2;
  private variable prop_arr[];
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "inducer_conc", 0);
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "additive_conc", 0);
  labware_id = "";
  well_id = "";
  inducer_conc = inducer_stock_concentration / (2 * 1.0);
  {
    loopCounter2 = 0;
    ML_STAR.Inducer_dil.SetCurrentPosition(1);
    while (
       (ML_STAR.Inducer_dil.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.Inducer_dil, 1);
      loopCounter2 = loopCounter2 + 1;
      {
        for(loopCounter3 = 0; loopCounter3 < 8;)
        {
          loopCounter3 = loopCounter3 + 1;
          labware_id = SeqGetLabwareId(ML_STAR.Inducer_dil);
          well_id = SeqGetPositionId(ML_STAR.Inducer_dil);
          LMSF_UTILITIES::SeqSetPropertyByWell(labware_id, well_id, ML_STAR.Growth_Plate, Translate("inducer_conc"), inducer_conc);
          SeqIncrement(ML_STAR.Inducer_dil, 1);
        }
      }
      inducer_conc = inducer_conc / (2 * 1.0);
      if (
         (ML_STAR.Inducer_dil.GetCurrentPosition() > 0 && ML_STAR.Inducer_dil.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.Inducer_dil.SetMax(ML_STAR.Inducer_dil.GetTotal());
  }
  strain_str = "strain";
  plasmid_str = "plasmid";
  SeqSetPropertyRange(ML_STAR.strain_blank, 1, 24, strain_str, Translate("none"));
  SeqSetPropertyRange(ML_STAR.strain_blank, 1, 24, plasmid_str, Translate("none"));
  SeqSetPropertyRange(ML_STAR.plasmid_B, 1, 12, plasmid_str, plasmid_B_id);
  SeqSetPropertyRange(ML_STAR.plasmid_C, 1, 12, plasmid_str, plasmid_C_id);
  SeqSetPropertyRange(ML_STAR.plasmid_D, 1, 12, plasmid_str, plasmid_D_id);
  SeqSetPropertyRange(ML_STAR.plasmid_E, 1, 12, plasmid_str, plasmid_E_id);
  SeqSetPropertyRange(ML_STAR.plasmid_F, 1, 12, plasmid_str, plasmid_F_id);
  SeqSetPropertyRange(ML_STAR.plasmid_G, 1, 12, plasmid_str, plasmid_G_id);
  SeqSetPropertyRange(ML_STAR.plasmid_B, 1, 12, strain_str, strain_B_id);
  SeqSetPropertyRange(ML_STAR.plasmid_C, 1, 12, strain_str, strain_C_id);
  SeqSetPropertyRange(ML_STAR.plasmid_D, 1, 12, strain_str, strain_D_id);
  SeqSetPropertyRange(ML_STAR.plasmid_E, 1, 12, strain_str, strain_E_id);
  SeqSetPropertyRange(ML_STAR.plasmid_F, 1, 12, strain_str, strain_F_id);
  SeqSetPropertyRange(ML_STAR.plasmid_G, 1, 12, strain_str, strain_G_id);
  prop_arr.SetSize(0);
  prop_arr.AddAsLast(strain_str);
  prop_arr.AddAsLast(plasmid_str);
  LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.strain_blank, prop_arr, ML_STAR.Growth_Plate);
  LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.plasmid_B, prop_arr, ML_STAR.Growth_Plate);
  LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.plasmid_C, prop_arr, ML_STAR.Growth_Plate);
  LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.plasmid_D, prop_arr, ML_STAR.Growth_Plate);
  LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.plasmid_E, prop_arr, ML_STAR.Growth_Plate);
  LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.plasmid_F, prop_arr, ML_STAR.Growth_Plate);
  LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.plasmid_G, prop_arr, ML_STAR.Growth_Plate);
}

private function SaveWorklistAndMetadata(  ) void {
  private variable inducer_conc;
  private variable row_id;
  private variable well_id;
  private variable plasmid;
  private variable strain;
  private variable position;
  private variable column_id;
  private variable column_id_str;
  private file file1;
  private variable iniFilePath;
  private variable iniDir;
  private variable iniExists;
  private variable loopCounter2;
  private variable additive_conc;
  file1.AddField("position", position, hslInteger);
  file1.AddField("well", well_id, hslString, 255);
  file1.AddField("row", row_id, hslString, 255);
  file1.AddField("column", column_id, hslInteger);
  file1.AddField("inducerId", inducer_id, hslString, 255);
  file1.AddField("inducerConcentration", inducer_conc, hslFloat);
  file1.AddField("inducerUnits", inducer_units, hslString, 255);
  file1.AddField("selectorId", additive_id, hslString, 255);
  file1.AddField("selectorConc", additive_conc, hslString, 255);
  file1.AddField("selectorUnits", additive_units, hslString, 255);
  file1.AddField(strain_str, strain, hslString, 255);
  file1.AddField(plasmid_str, plasmid, hslString, 255);
  file1.SetDelimiter(hslCSVDelimited);
  if( 0 == file1.Open(worklist_file_path, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, worklist_file_path, "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    ML_STAR.Growth_Plate.SetCurrentPosition(1);
    while (
       (ML_STAR.Growth_Plate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.Growth_Plate, 1);
      loopCounter2 = loopCounter2 + 1;
      position = ML_STAR.Growth_Plate.GetCurrentPosition();
      well_id = SeqGetPositionId(ML_STAR.Growth_Plate);
      row_id = StrLeft(well_id, 1);
      column_id_str = StrMid(well_id, 1, 2);
      column_id = StrIVal(column_id_str);
      inducer_conc = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("inducer_conc"));
      additive_conc = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("additive_conc"));
      strain = SeqGetProperty(ML_STAR.Growth_Plate, position, strain_str);
      plasmid = SeqGetProperty(ML_STAR.Growth_Plate, position, plasmid_str);
      if( 0 == file1.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      SeqIncrement(ML_STAR.Growth_Plate, 1);
      if (
         (ML_STAR.Growth_Plate.GetCurrentPosition() > 0 && ML_STAR.Growth_Plate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.Growth_Plate.SetMax(ML_STAR.Growth_Plate.GetTotal());
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  iniDir = HSLExtensions::File::GetDirectoryName(worklist_file_path);
  iniFilePath = iniDir + "\\schema.ini";
  iniExists = HSLExtensions::File::Exists(iniFilePath);
  if (iniExists == 1)
  {
    HSLExtensions::File::Delete(iniFilePath);
  }
}

private function GetParams(  ) void {
  private variable param_dict;
  private variable loc;
  private variable read_line;
  private file file1;
  private variable split_line[];
  private variable inducer_conc_str;
  private variable loopCounter2;
  private variable culture_volume_str;
  private variable dilution_factor_str;
  private variable grad_plate_num_str;
  private variable sequence_num_str;
  private variable lineage_str;
  private variable key_exists;
  private variable bead_shift_str;
  param_dict = "param_dict";
  HSLExtensions::Dictionary::CreateDictionary(param_dict, 2);
  file1.AddField(1, read_line, hslString);
  file1.SetDelimiter(hslAsciiText);
  if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    while (
       (file1.Eof() == 0)
    )
    {
      loopCounter2 = loopCounter2 + 1;
      if( 0 == file1.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      loc = StrFind(read_line, ",");
      if (loc > 0)
      {
        split_line = HSLExtensions::String::Split(read_line, Translate(","), 1);
        HSLExtensions::Dictionary::AddItem(param_dict, split_line.ElementAt( 1 -1), split_line.ElementAt( 2 -1));
      }
    }
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  worklist_file_path = HSLExtensions::Dictionary::GetItem(param_dict, Translate("worklistFile"));
  strain_B_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("strainB"));
  strain_C_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("strainC"));
  strain_D_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("strainD"));
  strain_E_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("strainE"));
  strain_F_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("strainF"));
  strain_G_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("strainG"));
  plasmid_B_id = "none";
  plasmid_C_id = "none";
  plasmid_D_id = "none";
  plasmid_E_id = "none";
  plasmid_F_id = "none";
  plasmid_G_id = "none";
  inducer_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer"));
  inducer_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducerStockConc"));
  inducer_stock_concentration = StrFVal(inducer_conc_str);
  inducer_units = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducerStockUnits"));
  additive_id = Translate("none");
  additive_stock_concentration = 0;
  additive_units = Translate("none");
  is_pipetting = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isPipetting"));
  is_debugging = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isDebugging"));
  culture_volume_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("cultureVolume"));
  culture_volume = StrFVal(culture_volume_str);
  if (culture_volume > 450)
  {
    culture_volume = 450;
  }
  else
  {
    if (culture_volume < 200)
    {
      culture_volume = 200;
    }
  }
  dilution_factor_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("dilutionFactor"));
  dilution_factor = StrFVal(dilution_factor_str);
  grad_plate_num_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("gradPlateNum"));
  grad_plate_number = StrIVal(grad_plate_num_str);
  sequence_num_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("sequenceNum"));
  sequence_number = StrIVal(sequence_num_str);
  key_exists = HSLExtensions::Dictionary::ExistsItem(param_dict, "lineage");
  if (key_exists == 1)
  {
    lineage_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("lineage"));
    lineage = StrIVal(lineage_str);
  }
  else
  {
    lineage = 1;
  }
  bead_shift_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("beadZShift"));
  bead_z_shift = StrFVal(bead_shift_str);
  bead_z_unshift = -1 * bead_z_shift;
  bead_shift_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("beadXYShift"));
  bead_xy_shift = StrFVal(bead_shift_str);
  bead_xy_unshift = -1 * bead_xy_shift;
}
