 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
#include "Triplicate Cell gradient from eight culture tubes.res"
variable tip_counter_1000_channels;
variable tip_counter_300_channels;
global device ML_STAR ("Triplicate Cell gradient from eight culture tubes.lay", "ML_STAR", hslTrue);
variable culture_volume;
variable volume_ratio;
variable move_plates_and_lids;
variable mix_volume;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    StartUp();
    GetParams();
    volume_ratio = culture_volume / (500 * 1.0);
    if (move_plates_and_lids == "Yes")
    {
      MECC::TraceComment(Translate("=============================================================\nRemove lid from Growth plate\n============================================================="));
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Move_GP_lid, ML_STAR.Move_GP_lid_parking, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
    }
    MECC::TraceComment(Translate("=============================================================\nPipette media into Abgene plate and Growth plate\n============================================================="));
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    {
      sequence arrseqAspirate_1[];
      sequence arrseqDispense_1[];
      arrseqAspirate_1.SetSize(1);
      arrseqAspirate_1.SetAt(0, ML_STAR.Media_source);
      arrseqDispense_1.SetSize(1);
      arrseqDispense_1.SetAt(0, ML_STAR.Media_for_cells_10x);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 3);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 0);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 12);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslFalse);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_1, arrseqDispense_1, 1, 1, 800, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, ML_STAR.Media_for_cells_10x) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    {
      sequence arrseqAspirate_2[];
      sequence arrseqDispense_2[];
      arrseqAspirate_2.SetSize(1);
      arrseqAspirate_2.SetAt(0, ML_STAR.Media_source);
      arrseqDispense_2.SetSize(1);
      arrseqDispense_2.SetAt(0, ML_STAR.Media_for_cells_2x);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 3);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 0);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 12);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslFalse);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_2, arrseqDispense_2, 1, 1, 800, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, ML_STAR.Media_for_cells_2x) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    {
      sequence arrseqAspirate_3[];
      sequence arrseqDispense_3[];
      arrseqAspirate_3.SetSize(1);
      arrseqAspirate_3.SetAt(0, ML_STAR.Media_source);
      arrseqDispense_3.SetSize(1);
      arrseqDispense_3.SetAt(0, ML_STAR.Media_dispense);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 3);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 0);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 7);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslFalse);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_3, arrseqDispense_3, 1, 1, culture_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, ML_STAR.Media_dispense) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    MECC::TraceComment(Translate("=============================================================\nPipette cells from tubes to Abgene plate\n============================================================="));
    {
      sequence arrseqAspirate_4[];
      sequence arrseqDispense_4[];
      arrseqAspirate_4.SetSize(1);
      arrseqAspirate_4.SetAt(0, ML_STAR.Cell_Stocks);
      arrseqDispense_4.SetSize(1);
      arrseqDispense_4.SetAt(0, ML_STAR.Cells_10x);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
      PTL::SetPipettingState("AspiratePrerinsingMixPosition", 6);
      PTL::SetPipettingState("AspiratePrerinsingMixVolume", 500);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_4, arrseqDispense_4, 1, 1, 200, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Cell_Stocks, ML_STAR.Cells_10x) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    {
      sequence arrseqAspirate_5[];
      sequence arrseqDispense_5[];
      arrseqAspirate_5.SetSize(1);
      arrseqAspirate_5.SetAt(0, ML_STAR.Cells_10x);
      arrseqDispense_5.SetSize(1);
      arrseqDispense_5.SetAt(0, ML_STAR.Cells_2x_all);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
      PTL::SetPipettingState("AspiratePrerinsingMixPosition", 1);
      PTL::SetPipettingState("AspiratePrerinsingMixVolume", 500);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_5, arrseqDispense_5, 1, 1, 200, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Cells_10x, ML_STAR.Cells_2x_all) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    MECC::TraceComment(Translate("=============================================================\nPipette cell gradients in Growth Plate\n============================================================="));
    mix_volume = volume_ratio * 500;
    {
      sequence arrseqAspirate_6[];
      sequence arrseqDispense_6[];
      arrseqAspirate_6.SetSize(1);
      arrseqAspirate_6.SetAt(0, ML_STAR.Cells_dilute_from_1);
      arrseqDispense_6.SetSize(1);
      arrseqDispense_6.SetAt(0, ML_STAR.Cells_dilute_to_1);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 1);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
      PTL::SetPipettingState("AspiratePrerinsingMixPosition", 1);
      PTL::SetPipettingState("AspiratePrerinsingMixVolume", mix_volume);
      PTL::SetPipettingState("DispenseSubmergeDepth", 1);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslTrue);
      PTL::SetPipettingState("DispenseSequenceReducible", hslTrue);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_6, arrseqDispense_6, 1, 1, culture_volume, 0, 1, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Cells_dilute_from_1, ML_STAR.Cells_dilute_to_1) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    {
      sequence arrseqAspirate_7[];
      sequence arrseqDispense_7[];
      arrseqAspirate_7.SetSize(1);
      arrseqAspirate_7.SetAt(0, ML_STAR.Cells_dilute_from_2);
      arrseqDispense_7.SetSize(1);
      arrseqDispense_7.SetAt(0, ML_STAR.Cells_dilute_to_2);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 1);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
      PTL::SetPipettingState("AspiratePrerinsingMixPosition", 1);
      PTL::SetPipettingState("AspiratePrerinsingMixVolume", mix_volume);
      PTL::SetPipettingState("DispenseSubmergeDepth", 1);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslTrue);
      PTL::SetPipettingState("DispenseSequenceReducible", hslTrue);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_7, arrseqDispense_7, 1, 1, culture_volume, 0, 1, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Cells_dilute_from_2, ML_STAR.Cells_dilute_to_2) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    {
      sequence arrseqAspirate_8[];
      sequence arrseqDispense_8[];
      arrseqAspirate_8.SetSize(1);
      arrseqAspirate_8.SetAt(0, ML_STAR.Cells_dilute_from_3);
      arrseqDispense_8.SetSize(1);
      arrseqDispense_8.SetAt(0, ML_STAR.Cells_dilute_to_3);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 1);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
      PTL::SetPipettingState("AspiratePrerinsingMixPosition", 1);
      PTL::SetPipettingState("AspiratePrerinsingMixVolume", mix_volume);
      PTL::SetPipettingState("DispenseSubmergeDepth", 1);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslTrue);
      PTL::SetPipettingState("DispenseSequenceReducible", hslTrue);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_8, arrseqDispense_8, 1, 1, culture_volume, 0, 1, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Cells_dilute_from_3, ML_STAR.Cells_dilute_to_3) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    if (move_plates_and_lids == "Yes")
    {
      MECC::TraceComment(Translate("=============================================================\nRemove lid from Growth plate\n============================================================="));
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Move_GP_lid_parking, ML_STAR.Move_GP_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
      PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_GP, ML_STAR.Move_GP_lid, ML_STAR.Move_GP_Handoff, ML_STAR.Move_GP_Handoff_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
      PLATEANDLIDMOVEMENT::MoveLidNoTap(ML_STAR.Move_GP_Handoff_lid, ML_STAR.Move_GP_lid_waste, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    }
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
  } }
