private function CalculateOutputs(  ) void ;
private function CleanUp(  ) void ;
private function GetParams(  ) void ;
private function SaveWorklistAndMetadata(  ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function CleanUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  MECC::TraceComment(Translate("**** start CleanUp sub-method ****"));
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        TipCount::Write2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        TipCount::Write2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        TipCount::Write2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 4)
      {
        TipCount::Write2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR, ML_STAR.clear_96_head_seq);
  MECC::TraceComment(Translate("**** end CleanUp sub-method ****"));
}

private function StartUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  MECC::TraceComment(Translate("**** start StartUp sub-method ****"));
  TIP_HANDLING_WITH_96_HEAD::GetTipCounters(tip_counter_array, 1);
  tip_seq_arr.SetSize(0);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_300_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_50_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Offset_pickup);
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        TipCount::Read2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        TipCount::Read2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        TipCount::Read2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 4)
      {
        TipCount::Read2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  MECC::TraceComment(Translate("**** end StartUp sub-method ****"));
}

private function CalculateOutputs(  ) void {
  private sequence plasmid_prop_arr[];
  private variable number_of_plasmids;
  private variable plas_num;
  private variable plasmid_repeats;
  private variable prop_arr[];
  MECC::TraceComment(Translate("**** start CalculateOutputs sub-method ****"));
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, Translate("strain"), strain_1_id);
  plasmid_prop_arr.SetSize(0);
  plasmid_prop_arr.AddAsLast(ML_STAR.plasmid_1);
  plasmid_prop_arr.AddAsLast(ML_STAR.plasmid_2);
  plasmid_prop_arr.AddAsLast(ML_STAR.plasmid_3);
  plasmid_prop_arr.AddAsLast(ML_STAR.plasmid_4);
  plasmid_prop_arr.AddAsLast(ML_STAR.plasmid_5);
  plasmid_prop_arr.AddAsLast(ML_STAR.plasmid_6);
  plasmid_prop_arr.AddAsLast(ML_STAR.plasmid_7);
  plasmid_prop_arr.AddAsLast(ML_STAR.plasmid_8);
  plasmid_prop_arr.AddAsLast(ML_STAR.plasmid_9);
  plasmid_prop_arr.AddAsLast(ML_STAR.plasmid_10);
  plasmid_prop_arr.AddAsLast(ML_STAR.plasmid_11);
  plasmid_prop_arr.AddAsLast(ML_STAR.plasmid_12);
  number_of_plasmids=plasmid_id_arr.GetSize();
  plasmid_repeats = 96 / number_of_plasmids;
  prop_arr.SetSize(0);
  prop_arr.AddAsLast(Translate("plasmid"));
  TrcTrace(Translate("number_of_plasmids: "), number_of_plasmids);
  TrcTrace(Translate("plasmid_repeats: "), plasmid_repeats);
  {
    for(plas_num = 0; plas_num < number_of_plasmids;)
    {
      plas_num = plas_num + 1;
      SeqSetPropertyRange(plasmid_prop_arr.ElementAt( plas_num -1), 1, plasmid_repeats, Translate("plasmid"), plasmid_id_arr.ElementAt( plas_num -1));
      LMSF_UTILITIES::SeqCopyPropsFromShortSeq(plasmid_prop_arr.ElementAt( plas_num -1), prop_arr, ML_STAR.Growth_Plate);
    }
  }
  MECC::TraceComment(Translate("**** end CalculateOutputs sub-method ****"));
}

private function SaveWorklistAndMetadata(  ) void {
  private variable row_id;
  private variable well_id;
  private variable plasmid;
  private variable strain;
  private variable position;
  private variable column_id;
  private variable column_id_str;
  private file file1;
  private variable iniFilePath;
  private variable iniDir;
  private variable iniExists;
  private variable loopCounter2;
  MECC::TraceComment(Translate("**** start SaveWorklistAndMetadata sub-method ****"));
  file1.AddField("position", position, hslInteger);
  file1.AddField("well", well_id, hslString, 255);
  file1.AddField("row", row_id, hslString, 255);
  file1.AddField("column", column_id, hslInteger);
  file1.AddField("media", media_1_id, hslString, 255);
  file1.AddField("strain", strain, hslString, 255);
  file1.AddField("plasmid", plasmid, hslString, 255);
  file1.SetDelimiter(hslCSVDelimited);
  if( 0 == file1.Open(worklist_file_path, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, worklist_file_path, "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    ML_STAR.Growth_Plate.SetCurrentPosition(1);
    while (
       (ML_STAR.Growth_Plate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.Growth_Plate, 1);
      loopCounter2 = loopCounter2 + 1;
      position = ML_STAR.Growth_Plate.GetCurrentPosition();
      well_id = SeqGetPositionId(ML_STAR.Growth_Plate);
      row_id = StrLeft(well_id, 1);
      column_id_str = StrMid(well_id, 1, 2);
      column_id = StrIVal(column_id_str);
      strain = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("strain"));
      plasmid = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("plasmid"));
      if( 0 == file1.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      SeqIncrement(ML_STAR.Growth_Plate, 1);
      if (
         (ML_STAR.Growth_Plate.GetCurrentPosition() > 0 && ML_STAR.Growth_Plate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.Growth_Plate.SetMax(ML_STAR.Growth_Plate.GetTotal());
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  iniDir = HSLExtensions::File::GetDirectoryName(worklist_file_path);
  iniFilePath = iniDir + "\\schema.ini";
  iniExists = HSLExtensions::File::Exists(iniFilePath);
  if (iniExists == 1)
  {
    HSLExtensions::File::Delete(iniFilePath);
  }
  MECC::TraceComment(Translate("**** end SaveWorklistAndMetadata sub-method ****"));
}

private function GetParams(  ) void {
  private variable param_dict;
  private variable read_line;
  private file file1;
  private variable split_line[];
  private variable loopCounter2;
  private variable culture_volume_str;
  private variable dilution_factor_str;
  private variable loc;
  private variable plasmid_num;
  private variable plasmid_id;
  private variable plasmid_key;
  MECC::TraceComment(Translate("**** start GetParams sub-method ****"));
  param_dict = "param_dict";
  HSLExtensions::Dictionary::CreateDictionary(param_dict, 2);
  file1.AddField(1, read_line, hslString);
  file1.SetDelimiter(hslAsciiText);
  if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    while (
       (file1.Eof() == 0)
    )
    {
      loopCounter2 = loopCounter2 + 1;
      if( 0 == file1.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      loc = StrFind(read_line, ",");
      if (loc > 0)
      {
        split_line = HSLExtensions::String::Split(read_line, Translate(","), 1);
        HSLExtensions::Dictionary::AddItem(param_dict, split_line.ElementAt( 1 -1), split_line.ElementAt( 2 -1));
      }
    }
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  worklist_file_path = HSLExtensions::Dictionary::GetItem(param_dict, Translate("worklistFile"));
  strain_1_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("strain1"));
  plasmid_id_arr.SetSize(0);
  {
    for(plasmid_num = 0; plasmid_num < 12;)
    {
      plasmid_num = plasmid_num + 1;
      plasmid_key = StrConcat2(Translate("hamilton_plasmid_"), plasmid_num);
      plasmid_id = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), plasmid_key);
      plasmid_id_arr.AddAsLast(plasmid_id);
      TrcTrace4(Translate("****    "), plasmid_key, Translate(": "), plasmid_id);
    }
  }
  media_1_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("media_1"));
  is_pipetting = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isPipetting"));
  is_debugging = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isDebugging"));
  culture_volume_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("cultureVolume"));
  culture_volume = StrFVal(culture_volume_str);
  if (culture_volume > 500)
  {
    culture_volume = 500;
  }
  else
  {
    if (culture_volume < 200)
    {
      culture_volume = 200;
    }
  }
  dilution_factor_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("dilutionFactor"));
  dilution_factor = StrFVal(dilution_factor_str);
  MECC::TraceComment(Translate("**** end GetParams sub-method ****"));
}
