 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
 namespace _Method { #include "HSLExtensions\\Directory.hsl" }
 namespace _Method { #include "HSLTimLib.hsl" }
 namespace _Method { #include "GSF-IMS Project\\GSF-IMS.shared_submethods.hs_" }
#include "URA fitness assay.res"
variable worklist_file_path;
variable strain_1_id;
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable culture_volume;
variable is_debugging;
dialog dialogHandle_1;
global device ML_STAR ("URA fitness assay.lay", "ML_STAR", hslTrue);
variable dilution_factor;
variable cell_volume;
variable media_volume;
variable media_1_id;
variable plasmid_id_arr[];
variable media_3_2_fraction;
variable media_2_1_fraction;
variable media_4_id;
variable media_3_id;
variable media_2_id;
variable media_3_1_fraction;
variable media_2_2_fraction;
variable mixture_volume;
variable med_3_vol_for_mix_1_3_1;
variable med_1_vol_for_mix_1_3_1;
variable med_3_vol_for_mix_1_3_2;
variable med_1_vol_for_mix_1_3_2;
variable med_4_vol_for_mix_2_4_1;
variable med_4_vol_for_mix_2_4_2;
variable med_2_vol_for_mix_2_4_2;
dialog dialogHandle_2;
variable pipette_volume;
variable med_2_vol_for_mix_2_4_1;
variable media_pipette_vol_arr[];
variable tmp_vol;
variable media_add_vol_arr[];
variable med_pipetting_arr_loop;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("==========================================================================================\nThis method used for preparing plate 1, with just media and bacteria in all the wells, for growth to stationary phase.\n\nIt uses 16 1000 uL tips\n=========================================================================================="));
    GetParams();
    StartUp();
    med_3_vol_for_mix_1_3_1 = mixture_volume * media_3_1_fraction;
    med_1_vol_for_mix_1_3_1 = mixture_volume - med_3_vol_for_mix_1_3_1;
    med_3_vol_for_mix_1_3_2 = mixture_volume * media_3_2_fraction;
    med_1_vol_for_mix_1_3_2 = mixture_volume - med_3_vol_for_mix_1_3_2;
    med_4_vol_for_mix_2_4_1 = mixture_volume * media_3_1_fraction;
    med_2_vol_for_mix_2_4_1 = mixture_volume - med_4_vol_for_mix_2_4_1;
    med_4_vol_for_mix_2_4_2 = mixture_volume * media_3_2_fraction;
    med_2_vol_for_mix_2_4_2 = mixture_volume - med_4_vol_for_mix_2_4_2;
    cell_volume = culture_volume / (dilution_factor * 1.0);
    media_volume = culture_volume - cell_volume;
    media_pipette_vol_arr.SetSize(0);
    {
      for(med_pipetting_arr_loop = 0; med_pipetting_arr_loop < 2;)
      {
        med_pipetting_arr_loop = med_pipetting_arr_loop + 1;
        media_pipette_vol_arr.AddAsLast(media_volume);
        tmp_vol = media_volume * media_2_1_fraction;
        media_pipette_vol_arr.AddAsLast(tmp_vol);
        tmp_vol = media_volume * media_2_2_fraction;
        media_pipette_vol_arr.AddAsLast(tmp_vol);
        media_pipette_vol_arr.AddAsLast(media_volume);
      }
    }
    media_add_vol_arr.SetSize(0);
    {
      for(med_pipetting_arr_loop = 0; med_pipetting_arr_loop < 2;)
      {
        med_pipetting_arr_loop = med_pipetting_arr_loop + 1;
        tmp_vol = media_volume * media_2_1_fraction;
        tmp_vol = media_volume - tmp_vol;
        media_add_vol_arr.AddAsLast(tmp_vol);
        tmp_vol = media_volume * media_2_2_fraction;
        tmp_vol = media_volume - tmp_vol;
        media_add_vol_arr.AddAsLast(tmp_vol);
      }
    }
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Reagent_Mixing_Plate_lid, ML_STAR.Lid_parking_reagent_mixing, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_source_lid, ML_STAR.Lid_parking_Media_source, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nPipette media mixtures into reagent mixture plate.\n=============================================================="));
    if (is_pipetting == "true")
    {
      GSF_IMS_SHARED_SUBMETHODS::tip_pickup(ML_STAR.Tips_1000_Channels, 8, ML_STAR);
      pipette_volume = med_3_vol_for_mix_1_3_1 / (16 * 1.0);
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_3, ML_STAR.mixture_1_3_1, pipette_volume, 1, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_reuse_tips(ML_STAR.Media_3, ML_STAR.mixture_1_3_1, pipette_volume, 0, 0, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
      pipette_volume = med_3_vol_for_mix_1_3_2 / (16 * 1.0);
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_3, ML_STAR.mixture_1_3_2, pipette_volume, 0, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_reuse_tips(ML_STAR.Media_3, ML_STAR.mixture_1_3_2, pipette_volume, 0, 0, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::tip_eject(8, ML_STAR);
      pipette_volume = med_1_vol_for_mix_1_3_1 / (8 * 1.0);
      if (pipette_volume > 300)
      {
        GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(ML_STAR.Media_1, ML_STAR.mixture_1_3_1, pipette_volume, 5, 1000, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
      }
      else
      {
        GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(ML_STAR.Media_1, ML_STAR.mixture_1_3_1, pipette_volume, 10, 300, ML_STAR.Tips_300_Channels, 8, ML_STAR);
      }
      pipette_volume = med_1_vol_for_mix_1_3_2 / (8 * 1.0);
      if (pipette_volume > 300)
      {
        GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(ML_STAR.Media_1, ML_STAR.mixture_1_3_2, pipette_volume, 5, 1000, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
      }
      else
      {
        GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(ML_STAR.Media_1, ML_STAR.mixture_1_3_2, pipette_volume, 10, 300, ML_STAR.Tips_300_Channels, 8, ML_STAR);
      }
      GSF_IMS_SHARED_SUBMETHODS::tip_pickup(ML_STAR.Tips_1000_Channels, 8, ML_STAR);
      pipette_volume = med_4_vol_for_mix_2_4_1 / (16 * 1.0);
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_4, ML_STAR.mixture_2_4_1, pipette_volume, 1, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_reuse_tips(ML_STAR.Media_4, ML_STAR.mixture_2_4_1, pipette_volume, 0, 0, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
      pipette_volume = med_4_vol_for_mix_2_4_2 / (16 * 1.0);
      GSF_IMS_SHARED_SUBMETHODS::pipette_media(ML_STAR.Media_4, ML_STAR.mixture_2_4_2, pipette_volume, 0, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::add_reagent_reuse_tips(ML_STAR.Media_4, ML_STAR.mixture_2_4_2, pipette_volume, 0, 0, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
      GSF_IMS_SHARED_SUBMETHODS::tip_eject(8, ML_STAR);
      pipette_volume = med_2_vol_for_mix_2_4_1 / (8 * 1.0);
      if (pipette_volume > 300)
      {
        GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(ML_STAR.Media_2, ML_STAR.mixture_2_4_1, pipette_volume, 5, 1000, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
      }
      else
      {
        GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(ML_STAR.Media_2, ML_STAR.mixture_2_4_1, pipette_volume, 10, 300, ML_STAR.Tips_300_Channels, 8, ML_STAR);
      }
      pipette_volume = med_2_vol_for_mix_2_4_2 / (8 * 1.0);
      if (pipette_volume > 300)
      {
        GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(ML_STAR.Media_2, ML_STAR.mixture_2_4_2, pipette_volume, 5, 1000, ML_STAR.Tips_1000_Channels, 8, ML_STAR);
      }
      else
      {
        GSF_IMS_SHARED_SUBMETHODS::add_reagent_replace_tips(ML_STAR.Media_2, ML_STAR.mixture_2_4_2, pipette_volume, 10, 300, ML_STAR.Tips_300_Channels, 8, ML_STAR);
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_2.SetOutput(Translate("Pipette media mixtures into reagent mixture plate."), "\n");
        dialogHandle_2.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate.\n=============================================================="));
    if (is_pipetting == "true")
    {
      pipette_media_arr(ML_STAR.source_media_1_and_2, ML_STAR.gp_media_1_and_2, media_pipette_vol_arr);
      add_media_arr(ML_STAR.source_media_1_and_2_add, ML_STAR.gp_media_1_and_2_add, media_add_vol_arr);
      pipette_media_arr(ML_STAR.source_media_mix_1, ML_STAR.gp_media_mix_1, media_pipette_vol_arr);
      add_media_arr(ML_STAR.source_media_mix_1_add, ML_STAR.gp_media_mix_1_add, media_add_vol_arr);
      pipette_media_arr(ML_STAR.source_media_mix_2, ML_STAR.gp_media_mix_2, media_pipette_vol_arr);
      add_media_arr(ML_STAR.source_media_mix_2_add, ML_STAR.gp_media_mix_2_add, media_add_vol_arr);
      pipette_media_arr(ML_STAR.source_media_3_and_4, ML_STAR.gp_media_3_and_4, media_pipette_vol_arr);
      add_media_arr(ML_STAR.source_media_3_and_4_add, ML_STAR.gp_media_3_and_4_add, media_add_vol_arr);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_1.SetOutput(Translate("media into growth plate"), "\n");
        dialogHandle_1.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Media_source, ML_STAR.Media_source_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_reagent_mixing, ML_STAR.Reagent_Mixing_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Lid_parking_Old_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CalculateOutputs();
    SaveWorklistAndMetadata();
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_ExitLibrary();
  } }
