 namespace _Method { #include "Common\\iSWAP-PlateAndLidMovement.hs_" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_Device_Controllers.hs_" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_TruSeqNano_Prep.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
#include "gDNA Extraction.res"
variable bln_Global_SimulatorMode;
variable str_Global_ODTCIPAddress;
variable ODTC;
variable pipette_volume;
variable loopCounter3;
variable loopCounter1;
variable loopCounter2;
variable is_debugging;
sequence Sample_Plate_arr[];
sequence Rev_Primer_arr[];
sequence Rev_Primer;
variable bead_volume;
timer magnet_timer;
timer timer3;
variable time_point;
variable bln_Global_SkipAllTimers;
variable timer_2_min;
variable timer_5_min;
variable timer_3_min;
sequence Pooling_arr[];
sequence Pooling_to;
variable user_choice;
variable Bead_stock_volume;
variable Beads_used;
variable sample_mix_volume;
variable timer_10_sec;
variable timer_4_min;
global device ML_STAR ("gDNA Extraction.lay", "ML_STAR", hslTrue);
global device HxFan ("gDNA Extraction.lay", "HxFan", hslTrue);
variable SetTempHHS1;
variable var_Global_HHSNode1;
variable HHS1;
variable HHS2;
variable var_Global_HHSNode2;
variable SetTempHHS2;
variable loopCounter6;
variable mix_volume;
sequence Sample_Plate_Use;
variable timer_20_min;
variable timer_10_min;
variable timer_7_min;
variable loopCounter7;
timer EvaporationTime;
variable loopCounter8;
sequence Elution_Plate_arr[];
sequence Elution_Plate_Use;
variable is_pipetting;
dialog dialogHandle1;
dialog dialogHandle_1;
dialog dialogHandle_2;
dialog dialogHandle_3;
dialog dialogHandle_4;
dialog dialogHandle_5;
dialog dialogHandle_6;
dialog dialogHandle_7;
dialog dialogHandle_8;
variable HHS3;
variable SetTempCPAC;
variable SetTempHHS3;
variable var_Global_HHSNode3;
dialog dialogHandle_9;
variable timer_15_min;
timer timer1;
variable timer_1_min;
variable timer_25_min;
variable lysis_10_min;
variable pcr_yes;
variable lysis_5_min;
dialog dialogHandle2;
variable odtc_script_path;
variable odtc_script_time;
variable odtc_script_id;
dialog dialogHandle_10;
dialog dialogHandle_11;
variable loopCounter4;
dialog dialogHandle_12;
dialog dialogHandle_13;
dialog dialogHandle_14;
dialog dialogHandle_15;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ISWAP_PLATEANDLIDMOVEMENT::_InitLibrary();
    NIST_DEVICE_CONTROLLERS::_InitLibrary();
    NIST_TRUSEQNANO_PREP::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("************************************************************************************\nMethod for gDNA extraction from yeast\n\nuses:\n24 x 50 uL tips\n120 x 300 uL tips (1 1/2 racks)\n144 x 1000 uL tips (1 rack)\n\n****************************************************************************************"));
    is_pipetting = 1;
    bln_Global_SimulatorMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    is_debugging = "false";
    bln_Global_SkipAllTimers = 0;
    if (bln_Global_SimulatorMode == 1)
    {
      bln_Global_SkipAllTimers = 1;
    }
    if (bln_Global_SkipAllTimers == 1)
    {
      timer_1_min = 1;
      timer_2_min = 1;
      timer_3_min = 1;
      timer_4_min = 1;
      timer_5_min = 1;
      timer_7_min = 7;
      timer_10_min = 5;
      timer_15_min = 7;
      timer_20_min = 10;
      timer_25_min = 10;
      timer_10_sec = 1;
    }
    else
    {
      timer_1_min = 60;
      timer_2_min = 120;
      timer_3_min = 180;
      timer_4_min = 240;
      timer_5_min = 300;
      timer_7_min = 420;
      timer_10_min = 600;
      timer_15_min = 900;
      timer_20_min = 1200;
      timer_25_min = 1500;
      timer_10_sec = 10;
    }
    GetParams();
    Bead_stock_volume = 35000;
    Beads_used = time_point - 1;
    Beads_used = Beads_used * 4666;
    Beads_used = Beads_used * 1.6;
    Bead_stock_volume = Bead_stock_volume - Beads_used;
    Bead_stock_volume = 10000;
    Trace ("Bead stock remaining:  ", Bead_stock_volume);
    StartUp();
    Sample_Plate_arr.SetSize(0);
    Sample_Plate_arr.AddAsLast(ML_STAR.Sample_Plate_1);
    Sample_Plate_arr.AddAsLast(ML_STAR.Sample_Plate_2);
    Sample_Plate_arr.AddAsLast(ML_STAR.Sample_Plate_3);
    Sample_Plate_arr.AddAsLast(ML_STAR.Sample_Plate_4);
    Sample_Plate_Use=Sample_Plate_arr.GetAt(time_point-1);
    Elution_Plate_arr.SetSize(0);
    Elution_Plate_arr.AddAsLast(ML_STAR.Elution_Plate_1);
    Elution_Plate_arr.AddAsLast(ML_STAR.Elution_Plate_2);
    Elution_Plate_arr.AddAsLast(ML_STAR.Elution_Plate_3);
    Elution_Plate_arr.AddAsLast(ML_STAR.Elution_Plate_4);
    Elution_Plate_Use=Elution_Plate_arr.GetAt(time_point-1);
    Rev_Primer_arr.SetSize(0);
    Rev_Primer_arr.AddAsLast(ML_STAR.Rev_Primers_1);
    Rev_Primer_arr.AddAsLast(ML_STAR.Rev_Primers_2);
    Rev_Primer_arr.AddAsLast(ML_STAR.Rev_Primers_3);
    Rev_Primer_arr.AddAsLast(ML_STAR.Rev_Primers_4);
    Rev_Primer=Rev_Primer_arr.GetAt(time_point-1);
    Pooling_arr.SetSize(0);
    Pooling_arr.AddAsLast(ML_STAR.Pooling_Plate_1);
    Pooling_arr.AddAsLast(ML_STAR.Pooling_Plate_2);
    Pooling_arr.AddAsLast(ML_STAR.Pooling_Plate_3);
    Pooling_arr.AddAsLast(ML_STAR.Pooling_Plate_4);
    Pooling_to=Pooling_arr.GetAt(time_point-1);
    if(0){
      ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Sample_Plate_lid, ML_STAR.Sample_Plate_Lid_Parking, 1, 1, ML_STAR);
    }
    MECC::TraceComment(Translate("Resuspend cell pellets with Digestion Buffer"));
    if (is_pipetting == 1)
    {
      pipette_volume = 300;
      mix_volume = pipette_volume * 0.75;
      {
        loopCounter6 = 0;
        while (
           (Sample_Plate_Use.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.Digestion_Buffer, 1, Sample_Plate_Use, 1);
          loopCounter6 = loopCounter6 + 1;
          TipPickupWithErrorHandling(ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (Sample_Plate_Use.GetCurrentPosition() > 0 && Sample_Plate_Use.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.Digestion_Buffer.SetMax(ML_STAR.Digestion_Buffer.GetTotal());
        Sample_Plate_Use.SetMax(Sample_Plate_Use.GetTotal());
        ML_STAR.Digestion_Buffer.SetCurrentPosition(1);
        Sample_Plate_Use.SetCurrentPosition(1);
      }
    }
    else
    {
      dialogHandle_9.SetOutput(Translate("Resuspend cell pellets with Digestion Buffer"));
      dialogHandle_9.ShowOutput(Translate("Transfer from sample plate to midi plate"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    MECC::TraceComment(Translate("Transfer cell samples to Midi plate (at 37C)"));
    if (is_pipetting == 1)
    {
      pipette_volume = 300;
      mix_volume = pipette_volume * 0.75;
      {
        loopCounter6 = 0;
        while (
           (ML_STAR.Midi_on_HHS_1.GetCurrentPosition() > 0)
        && (Sample_Plate_Use.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.Midi_on_HHS_1, 1, Sample_Plate_Use, 1);
          loopCounter6 = loopCounter6 + 1;
          TipPickupWithErrorHandling(ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (ML_STAR.Midi_on_HHS_1.GetCurrentPosition() > 0 && ML_STAR.Midi_on_HHS_1.GetMax() == 0 )
          && (Sample_Plate_Use.GetCurrentPosition() > 0 && Sample_Plate_Use.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.Midi_on_HHS_1.SetMax(ML_STAR.Midi_on_HHS_1.GetTotal());
        Sample_Plate_Use.SetMax(Sample_Plate_Use.GetTotal());
        ML_STAR.Midi_on_HHS_1.SetCurrentPosition(1);
        Sample_Plate_Use.SetCurrentPosition(1);
      }
    }
    else
    {
      dialogHandle1.SetOutput(Translate("Transfer from sample plate to midi plate"));
      dialogHandle1.ShowOutput(Translate("Transfer from sample plate to midi plate"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    SetTempHHS1 = 37;
    if (bln_Global_SimulatorMode == 0)
    {
      MECC::TraceComment(Translate("Set temp 37C"));
      NIST_TRUSEQNANO_PREP::SetHHSTemperature(HHS1, SetTempHHS1);
    }
    if (bln_Global_SimulatorMode == 0)
    {
      MECC::TraceComment(Translate("*** Open clamp on HHS3 so we can check sample plate *****"));
      HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
      MECC::TraceComment(Translate("**********************************************************"));
      HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
      HSLHamHeaterShaker::StartShaker(HHS1, 400);
    }
    MECC::TraceComment(Translate("***** Now shaking at 37C for 25 min ......."));
    if(0){
      ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Sample_Plate_Lid_Parking, ML_STAR.Sample_Plate_lid, 1, 1, ML_STAR);
    }
    if( 0 == timer3.SetTimer(timer_25_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 25 min shaking timer ****"));
    if( 0 == timer3.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::StopShaker(HHS1);
      HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
      NIST_TRUSEQNANO_PREP::GetHHSTemperature(HHS1, SetTempHHS1, 0);
    }
    MECC::TraceComment(Translate("****** Add Lysis buffer to samples"));
    if (is_pipetting == 1)
    {
      pipette_volume = 100;
      mix_volume = 300;
      {
        loopCounter6 = 0;
        while (
           (ML_STAR.Midi_on_HHS_1.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.Midi_on_HHS_1, 1, ML_STAR.Lysys_Buffer, 1);
          loopCounter6 = loopCounter6 + 1;
          TipPickupWithErrorHandling(ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (ML_STAR.Midi_on_HHS_1.GetCurrentPosition() > 0 && ML_STAR.Midi_on_HHS_1.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.Midi_on_HHS_1.SetMax(ML_STAR.Midi_on_HHS_1.GetTotal());
        ML_STAR.Lysys_Buffer.SetMax(ML_STAR.Lysys_Buffer.GetTotal());
        ML_STAR.Midi_on_HHS_1.SetCurrentPosition(1);
        ML_STAR.Lysys_Buffer.SetCurrentPosition(1);
      }
    }
    else
    {
      dialogHandle_1.SetOutput(Translate("Add Lysis buffer to midi plate"));
      dialogHandle_1.ShowOutput(Translate("Add Lysis buffer to midi plate"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    SetTempHHS1 = 75;
    if (bln_Global_SimulatorMode == 0)
    {
      MECC::TraceComment(Translate("Set temp 75C"));
      NIST_TRUSEQNANO_PREP::SetHHSTemperature(HHS1, SetTempHHS1);
    }
    if (lysis_5_min == 1)
    {
      MECC::TraceComment(Translate("***** Now incubating at 75C for 5 min ......."));
      if( 0 == timer3.SetTimer(timer_5_min) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      MECC::TraceComment(Translate("**** 5 min timer ****"));
    }
    else
    {
      if (lysis_10_min == 1)
      {
        MECC::TraceComment(Translate("***** Now incubating at 75C for 10 min ......."));
        if( 0 == timer3.SetTimer(timer_10_min) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        MECC::TraceComment(Translate("**** 10 min timer ****"));
      }
      else
      {
        dialogHandle2.SetOutput(Translate("lysis_5_min; "), lysis_5_min, "\n", Translate("lysis_10_min: "), lysis_10_min, "\n");
        dialogHandle2.ShowOutput(Translate("Error: Lysis time not set?"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    if( 0 == timer3.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (bln_Global_SimulatorMode == 0)
    {
      NIST_TRUSEQNANO_PREP::GetHHSTemperature(HHS1, SetTempHHS1, 0);
    }
    MECC::TraceComment(Translate("*** Move to RT HSS, add beads, and shake for 7 min ***"));
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
      HSLHamHeaterShaker::SetPlateLock(HHS2, 0);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_HHS_RT, 1, 0, ML_STAR);
    SetTempHHS1 = 60;
    if (bln_Global_SimulatorMode == 0)
    {
      MECC::TraceComment(Translate("Set temp 60C"));
      NIST_TRUSEQNANO_PREP::SetHHSTemperature(HHS1, SetTempHHS1);
      HSLHamHeaterShaker::SetPlateLock(HHS2, 1);
    }
    if (is_pipetting == 1)
    {
      bead_volume = 160;
      sample_mix_volume = 260;
      if (sample_mix_volume > 300)
      {
        sample_mix_volume = 300;
      }
      Add_AmpureSingle(ML_STAR.Bead_Stock, ML_STAR.Midi_on_HHS_RT_1, bead_volume, 1, sample_mix_volume);
    }
    else
    {
      dialogHandle_2.SetOutput(Translate("Add beads to midi plate"));
      dialogHandle_2.ShowOutput(Translate("Add beads to midi plate"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS2, 1);
      HSLHamHeaterShaker::StartShaker(HHS2, 300);
    }
    MECC::TraceComment(Translate("***** Now shaking at RT for 7 min ......."));
    if( 0 == timer3.SetTimer(timer_7_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 7 min shaking timer ****"));
    if( 0 == timer3.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::StopShaker(HHS2);
    }
    MECC::TraceComment(Translate("=======================================================\nMove Midi plate to magnet, incubate 5 minutes,\nthen discard the supernatant\n======================================================="));
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS2, 0);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS_RT, ML_STAR.Midi_on_magnet, 1, 0, ML_STAR);
    MECC::TraceComment(Translate("**** on magnet..."));
    if( 0 == magnet_timer.SetTimer(timer_5_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 5 minute timer for magnet ****"));
    if( 0 == magnet_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** done."));
    if (is_pipetting == 1)
    {
      pipette_volume = 600;
      pipette_volume = pipette_volume + 20;
      Transfer_PlatetoWaste(ML_STAR.Midi_on_magnet_1, pipette_volume, Translate("Nano_SVF_EthanolWaste_JetEmpty_HigherAirTransport"));
    }
    else
    {
      dialogHandle_3.SetOutput(Translate("Transfer supernatant to waste"));
      dialogHandle_3.ShowOutput(Translate("Transfer supernatant to waste"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if (is_pipetting == 1)
    {
      pipette_volume = 600;
      HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
      TipPickupWithErrorHandling(ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
      {
        loopCounter7 = 0;
        ML_STAR.Midi_on_magnet_1.SetCurrentPosition(1);
        while (
           (ML_STAR.Midi_on_magnet_1.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.Midi_on_magnet_1, 1);
          loopCounter7 = loopCounter7 + 1;
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          if (
             (ML_STAR.Midi_on_magnet_1.GetCurrentPosition() > 0 && ML_STAR.Midi_on_magnet_1.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.Midi_on_magnet_1.SetMax(ML_STAR.Midi_on_magnet_1.GetTotal());
        ML_STAR.Midi_on_magnet_1.SetCurrentPosition(1);
      }
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
      MECC::TraceComment(Translate("wait 1 minute"));
      if( 0 == timer1.SetTimer(timer_1_min) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == timer1.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      pipette_volume = pipette_volume + 20;
      Transfer_PlatetoWaste(ML_STAR.Midi_on_magnet_1, pipette_volume, Translate("Nano_SVF_EthanolWaste_JetEmpty_HigherAirTransport"));
    }
    else
    {
      dialogHandle_4.SetOutput(Translate("Ethanol wash 1"));
      dialogHandle_4.ShowOutput(Translate("Ethanol wash 1"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if (is_pipetting == 1)
    {
      pipette_volume = 300;
      HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
      TipPickupWithErrorHandling(ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
      {
        loopCounter7 = 0;
        ML_STAR.Midi_on_magnet_1.SetCurrentPosition(1);
        while (
           (ML_STAR.Midi_on_magnet_1.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.Midi_on_magnet_1, 1);
          loopCounter7 = loopCounter7 + 1;
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          if (
             (ML_STAR.Midi_on_magnet_1.GetCurrentPosition() > 0 && ML_STAR.Midi_on_magnet_1.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.Midi_on_magnet_1.SetMax(ML_STAR.Midi_on_magnet_1.GetTotal());
        ML_STAR.Midi_on_magnet_1.SetCurrentPosition(1);
      }
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
      MECC::TraceComment(Translate("wait 1 minute"));
      if( 0 == timer1.SetTimer(timer_1_min) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == timer1.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      pipette_volume = pipette_volume + 20;
      Transfer_PlatetoWaste(ML_STAR.Midi_on_magnet_1, pipette_volume, Translate("Nano_SVF_EthanolWaste_JetEmpty_HigherAirTransport"));
    }
    else
    {
      dialogHandle_5.SetOutput(Translate("Ethanol wash 2"));
      dialogHandle_5.ShowOutput(Translate("Ethanol wash 2"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if( 0 == EvaporationTime.SetTimer(timer_5_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (is_pipetting == 1)
    {
      Remove_ResidualEtOH(ML_STAR.Midi_on_magnet_1);
    }
    else
    {
    }
    MECC::TraceComment(Translate("**** 5 minute timer for ethanol evaporation ****"));
    if( 0 == EvaporationTime.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_magnet, ML_STAR.Midi_on_HHS, 1, 0, ML_STAR);
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
    }
    if (is_pipetting == 1)
    {
      pipette_volume = 100;
      Add_RSB(ML_STAR.Elution_Buffer, ML_STAR.Midi_on_HHS_1, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, pipette_volume, 1, 6, 12);
    }
    else
    {
      dialogHandle_6.SetOutput(Translate(" Add water for elution"));
      dialogHandle_6.ShowOutput(Translate(" Add water for elution"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    MECC::TraceComment(Translate("*** Incubate  at 60°C for 10 sec by shaking at 1000rpm and for 7 minutes at 400rpm ***"));
    if (bln_Global_SimulatorMode == 0)
    {
      NIST_TRUSEQNANO_PREP::GetHHSTemperature(HHS1, SetTempHHS1, 0);
      HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
      HSLHamHeaterShaker::StartShaker(HHS1, 1000);
    }
    MECC::TraceComment(Translate("***** Now shaking at 60C for 10 s ......."));
    if( 0 == timer3.SetTimer(timer_10_sec) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 10 s shaking timer ****"));
    if( 0 == timer3.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
      HSLHamHeaterShaker::StartShaker(HHS1, 400);
    }
    MECC::TraceComment(Translate("***** Now shaking at 60C for 7 min ......."));
    if( 0 == timer3.SetTimer(timer_7_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 7 min shaking timer ****"));
    if( 0 == timer3.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::StopShaker(HHS1);
    }
    MECC::TraceComment(Translate("=======================================================\nMove Midi plate to magnet, incubate 5 minutes,\nthen transfer to clean wells (on magnet) and incubate another 5 minutes\n======================================================="));
    if (bln_Global_SimulatorMode == 0)
    {
      HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_magnet, 1, 0, ML_STAR);
    MECC::TraceComment(Translate("**** on magnet..."));
    if( 0 == magnet_timer.SetTimer(timer_5_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 5 minute timer for magnet ****"));
    if( 0 == magnet_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** done."));
    if (is_pipetting == 1)
    {
      pipette_volume = pipette_volume + 10;
      {
        loopCounter8 = 0;
        ML_STAR.Midi_on_magnet_1.SetCurrentPosition(1);
        ML_STAR.Midi_on_magnet_2.SetCurrentPosition(1);
        while (
           (ML_STAR.Midi_on_magnet_1.GetCurrentPosition() > 0)
        && (ML_STAR.Midi_on_magnet_2.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.Midi_on_magnet_1, 1, ML_STAR.Midi_on_magnet_2, 1);
          loopCounter8 = loopCounter8 + 1;
          TipPickupWithErrorHandling(ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (ML_STAR.Midi_on_magnet_1.GetCurrentPosition() > 0 && ML_STAR.Midi_on_magnet_1.GetMax() == 0 )
          && (ML_STAR.Midi_on_magnet_2.GetCurrentPosition() > 0 && ML_STAR.Midi_on_magnet_2.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.Midi_on_magnet_1.SetMax(ML_STAR.Midi_on_magnet_1.GetTotal());
        ML_STAR.Midi_on_magnet_2.SetMax(ML_STAR.Midi_on_magnet_2.GetTotal());
        ML_STAR.Midi_on_magnet_1.SetCurrentPosition(1);
        ML_STAR.Midi_on_magnet_2.SetCurrentPosition(1);
      }
    }
    else
    {
      dialogHandle_7.SetOutput(Translate("Transfer to clean wells on magnet"));
      dialogHandle_7.ShowOutput(Translate("Transfer to clean wells on magnet"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    if( 0 == magnet_timer.SetTimer(timer_5_min) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** 5 minute timer for magnet ****"));
    if( 0 == magnet_timer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment(Translate("**** done."));
    MECC::TraceComment(Translate("***************************************************************************\nRemove lid from Elution Plate\n***************************************************************************"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Elution_Plate_lid, ML_STAR.Elution_Plate_Lid_Parking, 1, 1, ML_STAR);
    if (is_pipetting == 1)
    {
      {
        loopCounter8 = 0;
        ML_STAR.Midi_on_magnet_2.SetCurrentPosition(1);
        Elution_Plate_Use.SetCurrentPosition(1);
        while (
           (ML_STAR.Midi_on_magnet_2.GetCurrentPosition() > 0)
        && (Elution_Plate_Use.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.Midi_on_magnet_2, 1, Elution_Plate_Use, 1);
          loopCounter8 = loopCounter8 + 1;
          TipPickupWithErrorHandling(ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (ML_STAR.Midi_on_magnet_2.GetCurrentPosition() > 0 && ML_STAR.Midi_on_magnet_2.GetMax() == 0 )
          && (Elution_Plate_Use.GetCurrentPosition() > 0 && Elution_Plate_Use.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.Midi_on_magnet_2.SetMax(ML_STAR.Midi_on_magnet_2.GetTotal());
        Elution_Plate_Use.SetMax(Elution_Plate_Use.GetTotal());
        ML_STAR.Midi_on_magnet_2.SetCurrentPosition(1);
        Elution_Plate_Use.SetCurrentPosition(1);
      }
    }
    else
    {
      dialogHandle_8.SetOutput(Translate("Transfer to elution plate"));
      dialogHandle_8.ShowOutput(Translate("Transfer to elution plate"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    MECC::TraceComment(Translate("***************************************************************************\nReplace Lid on Elution Plate\n***************************************************************************"));
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Elution_Plate_Lid_Parking, ML_STAR.Elution_Plate_lid, 1, 1, ML_STAR);
    if (pcr_yes == 1)
    {
      MECC::TraceComment(Translate("***************************************************************************\nClose ODTC, and run PCR pre-heat method on ODTC\n***************************************************************************"));
      if (is_debugging == "true")
      {
        dialogHandle_10.SetOutput(Translate("Click 'OK' to continue."));
        dialogHandle_10.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
      if (bln_Global_SimulatorMode == 0)
      {
        NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
        odtc_script_path = "C:\\Program Files (x86)\\HAMILTON\\Methods\\GSF-IMS Project\\Yeast Methods\\gDNA Extraction\\PCR_Initialization.xml";
        NIST_DEVICE_CONTROLLERS::StartScriptODTC(ODTC, odtc_script_path, odtc_script_time, odtc_script_id);
      }
      MECC::TraceComment(Translate("***************************************************************************\nMove Midi plate to waste; Remove lid from PCR_Plate\n***************************************************************************"));
      if (is_debugging == "true")
      {
        dialogHandle_11.SetOutput(Translate("Click 'OK' to continue."));
        dialogHandle_11.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
      ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_magnet, ML_STAR.MIDI_Waste, 0, 1, ML_STAR);
      ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_Lid_Parking, 1, 1, ML_STAR);
      if (is_pipetting == 1)
      {
        pipette_volume = 22;
        {
          loopCounter4 = 0;
          ML_STAR.PCR_Plate_3.SetCurrentPosition(1);
          while (
             (ML_STAR.PCR_Plate_3.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, ML_STAR.PCR_Plate_3, 1);
            loopCounter4 = loopCounter4 + 1;
            TipPickupWithErrorHandling(ML_STAR.MlStar50ulTipWithFilter);
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            if (
               (ML_STAR.PCR_Plate_3.GetCurrentPosition() > 0 && ML_STAR.PCR_Plate_3.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          ML_STAR.PCR_Plate_3.SetMax(ML_STAR.PCR_Plate_3.GetTotal());
        }
      }
      MECC::TraceComment(Translate("***************************************************************************\nRemove lid from Elution Plate\n***************************************************************************"));
      ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Elution_Plate_lid, ML_STAR.Elution_Plate_Lid_Parking, 1, 1, ML_STAR);
      if (is_pipetting == 1)
      {
        pipette_volume = 3;
        {
          loopCounter4 = 0;
          ML_STAR.PCR_Plate_3.SetCurrentPosition(1);
          while (
             (ML_STAR.PCR_Plate_3.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, ML_STAR.PCR_Plate_3, 1);
            loopCounter4 = loopCounter4 + 1;
            TipPickupWithErrorHandling(ML_STAR.MlStar50ulTipWithFilter);
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            if (
               (ML_STAR.PCR_Plate_3.GetCurrentPosition() > 0 && ML_STAR.PCR_Plate_3.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          ML_STAR.PCR_Plate_3.SetMax(ML_STAR.PCR_Plate_3.GetTotal());
        }
      }
      MECC::TraceComment(Translate("***************************************************************************\nReplace lids on PCR_Plate and Elution Plate\n***************************************************************************"));
      if (is_debugging == "true")
      {
        dialogHandle_12.SetOutput(Translate("Click 'OK' to continue."));
        dialogHandle_12.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
      ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Elution_Plate_Lid_Parking, ML_STAR.Elution_Plate_lid, 0, 1, ML_STAR);
      ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_Lid_Parking, ML_STAR.PCR_Plate_lid, 0, 1, ML_STAR);
      MECC::TraceComment(Translate("***************************************************************************\nWait for ODTC lid pre-heating method, \nthen open ODTC, move PCR plate to ODTC, close ODTC and run PCR method\n***************************************************************************"));
      if (is_debugging == "true")
      {
        dialogHandle_13.SetOutput(Translate("Click 'OK' to continue."));
        dialogHandle_13.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
      if (bln_Global_SimulatorMode == 0)
      {
        NIST_DEVICE_CONTROLLERS::WaitForScriptODTC(ODTC, odtc_script_time, odtc_script_id);
        NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
      }
      ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlateWithLid(ML_STAR.PCR_Plate_move, ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_ODTC_move, ML_STAR.PCR_Plate_ODTC_lid, 0, 0, ML_STAR);
      if (bln_Global_SimulatorMode == 0)
      {
        NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
        odtc_script_path = "C:\\Program Files (x86)\\HAMILTON\\Methods\\GSF-IMS Project\\Yeast Methods\\gDNA Extraction\\PCR_Step_1.xml";
        NIST_DEVICE_CONTROLLERS::StartScriptODTC(ODTC, odtc_script_path, odtc_script_time, odtc_script_id);
      }
      MECC::TraceComment(Translate("***************************************************************************\nWait for PCR method to finish, then move PCR plate from ODTC\n***************************************************************************"));
      if (is_debugging == "true")
      {
        dialogHandle_14.SetOutput(Translate("Click 'OK' to continue."));
        dialogHandle_14.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
      if (bln_Global_SimulatorMode == 0)
      {
        NIST_DEVICE_CONTROLLERS::WaitForScriptODTC(ODTC, odtc_script_time, odtc_script_id);
        NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
      }
      ISWAP_PLATEANDLIDMOVEMENT::MovePCRPlateWithLid(ML_STAR.PCR_Plate_ODTC_move, ML_STAR.PCR_Plate_ODTC_lid, ML_STAR.PCR_Plate_move, ML_STAR.PCR_Plate_lid, 1, 0, ML_STAR);
      MECC::TraceComment(Translate("***************************************************************************\nClose ODTC\n***************************************************************************"));
      if (is_debugging == "true")
      {
        dialogHandle_15.SetOutput(Translate("Click 'OK' to continue."));
        dialogHandle_15.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
      if (bln_Global_SimulatorMode == 0)
      {
        NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
      }
    }
    CleanUp();
    ISWAP_PLATEANDLIDMOVEMENT::_ExitLibrary();
    NIST_DEVICE_CONTROLLERS::_ExitLibrary();
    NIST_TRUSEQNANO_PREP::_ExitLibrary();
  } }
