 namespace _Method { #include "Common\\iSWAP-PlateAndLidMovement.hs_" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_Device_Controllers.hs_" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_TruSeqNano_Prep.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
#include "gDNA Extraction.res"
variable ODTC;
global device ML_STAR ("gDNA Extraction.lay", "ML_STAR", hslTrue);
global device HxFan ("gDNA Extraction.lay", "HxFan", hslTrue);
variable SetTempHHS1;
variable HHS1;
variable HHS2;
variable SetTempHHS2;
variable HHS3;
variable SetTempCPAC;
variable SetTempHHS3;
variable bln_Global_SimulatorMode;
variable str_Global_ODTCIPAddress;
variable var_Global_HHSNode1;
variable var_Global_HHSNode3;
variable var_Global_HHSNode2;
timer timer1;
dialog dialogHandle1;
variable hhs_out;
variable loopCounter1;
timer timer2;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ISWAP_PLATEANDLIDMOVEMENT::_InitLibrary();
    NIST_DEVICE_CONTROLLERS::_InitLibrary();
    NIST_TRUSEQNANO_PREP::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("************************************************************************************\ntest method\n\n****************************************************************************************"));
    StartUp();
    SetTempHHS1 = 22;
    NIST_TRUSEQNANO_PREP::SetHHSTemperature(HHS1, SetTempHHS1);
    HSLHamHeaterShaker::BeginMonitoring(HHS1, 1, 10, 0);
    dialogHandle1.SetOutput(Translate("to continue"));
    dialogHandle1.ShowOutput(Translate("click"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    HSLHamHeaterShaker::EndMonitoring(HHS1, hhs_out);
    if(0){
      HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
      HSLHamHeaterShaker::StartShaker(HHS1, 1000);
      if( 0 == timer1.SetTimer(10) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == timer1.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      HSLHamHeaterShaker::StopShaker(HHS1);
    }
    HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
    HSLHamHeaterShaker::SetPlateLock(HHS2, 0);
    if(0){
      HSLHamHeaterShaker::StartShaker(HHS2, 1000);
      if( 0 == timer1.SetTimer(10) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == timer1.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      HSLHamHeaterShaker::StopShaker(HHS2);
      HSLHamHeaterShaker::SetPlateLock(HHS2, 1);
      HSLHamHeaterShaker::SetPlateLock(HHS2, 0);
      {
        for(loopCounter1 = 0; loopCounter1 < 5;)
        {
          loopCounter1 = loopCounter1 + 1;
          if( 0 == timer2.SetTimer(60) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_HHS_RT, 0, 0, ML_STAR);
          if( 0 == timer2.SetTimer(60) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS_RT, ML_STAR.Midi_on_HHS, 0, 0, ML_STAR);
        }
      }
    }
    if(0){
      ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Elution_Plate_lid, ML_STAR.Elution_Plate_Lid_Parking, 0, 1, ML_STAR);
      ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Elution_Plate_Lid_Parking, ML_STAR.Elution_Plate_lid, 1, 1, ML_STAR);
    }
    NIST_TRUSEQNANO_PREP::SetHHSTemperature(HHS1, 20);
    NIST_TRUSEQNANO_PREP::SetHHSTemperature(HHS2, 20);
    NIST_TRUSEQNANO_PREP::SetHHSTemperature(HHS3, 20);
    HSLHamHeaterShaker::StopShaker(HHS1);
    HSLHamHeaterShaker::StopShaker(HHS2);
    HSLHamHeaterShaker::StopShaker(HHS3);
    HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
    HSLHamHeaterShaker::SetPlateLock(HHS2, 0);
    HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    NIST_DEVICE_CONTROLLERS::TerminateHHSs();
    {
      	HxFan.SetFanSpeed("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"); // SetFanSpeed
    }
    ISWAP_PLATEANDLIDMOVEMENT::_ExitLibrary();
    NIST_DEVICE_CONTROLLERS::_ExitLibrary();
    NIST_TRUSEQNANO_PREP::_ExitLibrary();
  } }
