private function Initialize_HHS( variable & var_Local_DeviceID, variable var_Local_Node ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
}

private function Initialize_HHS( variable & var_Local_DeviceID, variable var_Local_Node ) void {
  private dialog customDialog_1;
  private variable bln_Local_HHSInitReturn;
  private variable int_Global_ReturnDialog;
  private variable loopCounter20;
  private variable bln_Global_SimulatorMode;
  var_Local_DeviceID = 0;
  MECC::TraceComment(Translate("==================================================================================================================================\nInitialize_HHS Start\n=================================================================================================================================="));
  Trace ("==================================================================================================================================");
  Trace ("Initializing HHS Located at Node:  ", var_Local_Node);
  Trace ("==================================================================================================================================");
  {
    loopCounter20 = 0;
    while (1 == 1)
    {
      loopCounter20 = loopCounter20 + 1;
      HSLHamHeaterShaker::SetSimulation(bln_Global_SimulatorMode);
      bln_Local_HHSInitReturn = HSLHamHeaterShaker::CreateUsbDevice(var_Local_Node, var_Local_DeviceID);
      if (bln_Local_HHSInitReturn != 0)
      {
        MECC::TraceComment(Translate("==================================================================================================================================\nFailed to Initialize HHS\n=================================================================================================================================="));
        HSLHamHeaterShaker::Terminate();
        customDialog_1.InitCustomDialog("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");
        customDialog_1.ShowCustomDialog();
        int_Global_ReturnDialog = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
        if (int_Global_ReturnDialog == 2)
        {
          MECC::TraceComment(Translate("==================================================================================================================================\nMethod Aborted\n=================================================================================================================================="));
          abort;
        }
      }
      else
      {
        break;
      }
    }
  }
  MECC::TraceComment(Translate("==================================================================================================================================\nInitialize_HHS Finish\n=================================================================================================================================="));
}

private function StartUp(  ) void {
  MECC::TraceComment(Translate("***************************************************************************\nStartUp() submethod\n***************************************************************************"));
  bln_Global_SimulatorMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
  if (bln_Global_SimulatorMode == 0)
  {
    {
      	HxFan.SetComPort("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"); // SetComPort
    }
    {
      	HxFan.SetFanSpeed("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"); // SetFanSpeed
    }
    {
      	HxFan.SetContinuousMode("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"); // SetContinuousMode
    }
  }
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
  if (bln_Global_SimulatorMode == 0)
  {
    str_Global_ODTCIPAddress = Translate("192.168.88.253");
    var_Global_HHSNode1 = 5;
    Initialize_HHS(HHS1, var_Global_HHSNode1);
    SetTempHHS1 = 20;
    MECC::TraceComment(Translate("Set temp 20C"));
    NIST_TRUSEQNANO_PREP::SetHHSTemperature(HHS1, SetTempHHS1);
    HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
    var_Global_HHSNode2 = 4;
    Initialize_HHS(HHS2, var_Global_HHSNode2);
    SetTempHHS2 = 20;
    MECC::TraceComment(Translate("Set temp 20C"));
    NIST_TRUSEQNANO_PREP::SetHHSTemperature(HHS2, SetTempHHS2);
    HSLHamHeaterShaker::SetPlateLock(HHS2, 1);
    var_Global_HHSNode3 = 3;
    Initialize_HHS(HHS3, var_Global_HHSNode3);
    SetTempHHS3 = 20;
    MECC::TraceComment(Translate("Set temp 20C"));
    NIST_TRUSEQNANO_PREP::SetHHSTemperature(HHS3, SetTempHHS3);
    HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  MECC::TraceComment(Translate("***************************************************************************\nEnd of StartUp() submethod\n***************************************************************************"));
}
