 namespace _Method { #include "HSLInhecoTEC\\HSLInhecoTECLib.hsl" }
 namespace _Method { #include "ASWStandard\\TraceLevel\\TraceLevel.hsl" }
 namespace _Method { #include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl" }
variable ReturnValue;
variable SimulationMode(0);
variable DeviceID(1);
dialog dialogHandle1;
variable LastError;
variable ErrorDescription;
variable ErrorCode("");
dialog dialogHandle_1;
variable ShakerRevolutions;
variable UserInputDecision;
dialog dialogHandle_2;
timer Timer;
variable ControllerID(0);
dialog dialogHandle_3;
dialog dialogHandle_4;
variable HeaterTemperature;
dialog dialogHandle_5;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLSchedCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    ::RegisterAbortHandler( "OnAbort");
    ControllerID = 0;
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_DEBUG);
    ReturnValue = HSLInhecoTECLib::Initialize(ControllerID, SimulationMode, ErrorCode);
    if (ReturnValue == ASWGLOBAL::BOOL::TRUE)
    {
    }
    else
    {
      ReturnValue = HSLInhecoTECLib::GetLastError(LastError);
      ReturnValue = HSLInhecoTECLib::GetDescriptionForErrorCode(ErrorCode, ErrorDescription);
      dialogHandle1.SetOutput(Translate("The error description:\n"), ErrorDescription, Translate("\nThe last error message:\n"), LastError);
      dialogHandle1.ShowOutput(Translate("An error occured! More information below!"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
      abort;
    }
    dialogHandle_1.SetInputSize(3);
    dialogHandle_1.SetInputField(0, Translate("Shaker Revolutions [rpm]"), hslInteger, 100, 60, 2000);
    dialogHandle_1.SetInputField(1, Translate("Controller ID (DIP-switch)"), hslInteger, ControllerID, 0, 7);
    dialogHandle_1.SetInputField(2, Translate("Device ID / Slot number"), hslInteger, DeviceID, 1, 6);
    UserInputDecision = dialogHandle_1.ShowInput(Translate("Please specify a shaker in your setup and input the revolutions for the shaker. After you input the value, the specified shaker will start. If no shaker is present, pls. hit <<Cancel>>."), hslInfinite, hslOKCancel | hslDefButton1);
    ShakerRevolutions = dialogHandle_1.GetInputField(0);
    ControllerID = dialogHandle_1.GetInputField(1);
    DeviceID = dialogHandle_1.GetInputField(2);
    if (UserInputDecision == 1)
    {
      ReturnValue = HSLInhecoTECLib::StartShaker(ControllerID, DeviceID, ErrorCode);
      if (ReturnValue == ASWGLOBAL::BOOL::TRUE)
      {
      }
      else
      {
        ReturnValue = HSLInhecoTECLib::GetLastError(LastError);
        ReturnValue = HSLInhecoTECLib::GetDescriptionForErrorCode(ErrorCode, ErrorDescription);
        dialogHandle_2.SetOutput(Translate("The error description:\n"), ErrorDescription, Translate("\nThe last error message:\n"), LastError);
        dialogHandle_2.ShowOutput(Translate("An error occured! More information below!"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
        abort;
      }
      if( 0 == Timer.SetTimer(6) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == Timer.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      HSLInhecoTECLib::StopShaker(ControllerID, DeviceID, ErrorCode);
    }
    dialogHandle_3.SetInputSize(3);
    dialogHandle_3.SetInputField(0, Translate("Shaker Revolutions 1/10°C"), hslInteger, 450, 0, 1350);
    dialogHandle_3.SetInputField(1, Translate("Controller ID (DIP-switch)"), hslInteger, ControllerID, 0, 7);
    dialogHandle_3.SetInputField(2, Translate("Device ID / Slot number"), hslInteger, DeviceID, 1, 6);
    UserInputDecision = dialogHandle_3.ShowInput(Translate("Please specify a shaker in your setup and input the revolutions for the shaker. After you input the value, the specified shaker will start. If no shaker is present, pls. hit <<Cancel>>."), hslInfinite, hslOKCancel | hslDefButton1);
    HeaterTemperature = dialogHandle_3.GetInputField(0);
    ControllerID = dialogHandle_3.GetInputField(1);
    DeviceID = dialogHandle_3.GetInputField(2);
    if (UserInputDecision == 1)
    {
      ReturnValue = HSLInhecoTECLib::SetTargetTemperature(ControllerID, DeviceID, HeaterTemperature, ErrorCode);
      if (ReturnValue == ASWGLOBAL::BOOL::TRUE)
      {
      }
      else
      {
        ReturnValue = HSLInhecoTECLib::GetLastError(LastError);
        ReturnValue = HSLInhecoTECLib::GetDescriptionForErrorCode(ErrorCode, ErrorDescription);
        dialogHandle_5.SetOutput(Translate("The error description:\n"), ErrorDescription, Translate("\nThe last error message:\n"), LastError);
        dialogHandle_5.ShowOutput(Translate("An error occured! More information below!"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
        abort;
      }
      ReturnValue = HSLInhecoTECLib::StartTemperatureControl(ControllerID, DeviceID, ErrorCode);
      if (ReturnValue == ASWGLOBAL::BOOL::TRUE)
      {
      }
      else
      {
        ReturnValue = HSLInhecoTECLib::GetLastError(LastError);
        ReturnValue = HSLInhecoTECLib::GetDescriptionForErrorCode(ErrorCode, ErrorDescription);
        dialogHandle_4.SetOutput(Translate("The error description:\n"), ErrorDescription, Translate("\nThe last error message:\n"), LastError);
        dialogHandle_4.ShowOutput(Translate("An error occured! More information below!"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
        abort;
      }
      if( 0 == Timer.SetTimer(6) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == Timer.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      HSLInhecoTECLib::StopTemperatureControl(ControllerID, DeviceID, ErrorCode);
    }
    ReturnValue = HSLInhecoTECLib::Terminate();
  } }
