 namespace _Method { #include "ASWStandardDialogs\\ASWStandardDialogs.hsl" }
 namespace _Method { #include "TruSeqPrep.hs_" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "PlateEditor96\\PlateEditor96.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "StepTracker\\StepTracker.hs_" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLInhecoTEC\\HSLInhecoTECLib.hsl" }
 namespace _Method { #include "HSLUtilLib.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "ASWStandard\\TraceLevel\\TraceLevel.hsl" }
 namespace _Method { #include "HSLVectorDbTracking.hsl" }
#include "Illumina Prep Methods\\16S rRNA\\16S_Metagenomic_Library_Prep_v2.0.res"
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLGetSerialNumber.hsl" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl" }
 namespace _Method { #include "IlluminaExperimentManagerLib.hs_" }
 namespace _Method { #include "ErrorEmailAlert.hs_" }
 namespace _Method { #include "HSLExtensions\\Array.hsl" }
 namespace _Method { #include "HSLSeqSortingLib\\HSLSeqSortingLib.hsl" }
global variable io_arrIsSelected[];
global variable HHS_PCR;
variable HHS_MIDI;
variable HHS_3;
global variable strWorklistFilePath;
global variable intNumberOfSamples;
global sequence seqPooledPlate;
global sequence seqDilutedSamples;
global sequence seqSampleSource;
global sequence seqUndilutedSamples;
global sequence seqUndilutedPooledPlate;
global variable arrSampleVolumes[];
global variable arrDiluentVolumes[];
global sequence seqTargetPlate;
global sequence arrHSPStackSequences[];
variable arrDescriptions[];
variable arrPositions[];
variable arrQuantities[];
variable arrColumnHeaders[];
variable intHSPCarrierLoopCounter;
variable strTopText;
variable strBottomText;
variable strTopImageFilePath;
variable strPosition;
global variable blnNeedToReloadHSPCarrier;
variable blnRetValue;
global variable intJobLoopCounter;
variable blnSimulationMode;
global variable strNumberOf1000uLTips;
global sequence seqPrimerPlate;
global sequence seqSourcePlate;
global variable arrPrimerVolumes[];
global variable arrTotalVolumes[];
global variable intNumberOfReagentsIn2mLTubes;
global variable intNumberOfReagentsIn5mLTubes;
global variable intNumberOfReagentsInTroughs;
global variable arrReagentsIn2mLTubes[];
global variable arrReagentsIn5mLTubes[];
global variable arrReagentsInTroughs[];
global variable strFileName;
variable arrDataTypes[];
variable arrRanges[];
variable arrInputListLabels[];
variable arrInputListUnits[];
variable arrInputListValues[];
variable o_arrResult[];
variable arrInputHeaders[];
variable arrCustomToolTip[];
variable arrGroupName[];
variable arrQuantSelection[];
variable arrLabels[];
variable arrTooltips[];
variable arrIsEditable[];
global variable strDilutionFactor;
global variable fltElutionAdditionVolumePerSample;
global variable fltBeadVolumePerSample;
global variable fltEthanolVolumePerSample;
global variable fltElutionVolumePerSample;
global variable fltBeadMixVolumePerSample;
global variable intNumberOfReagentsInStripWells;
global variable arrReagentsInStripWells[];
global variable arrRgtAndPrimerMixVolumes[];
global variable intNumberOfPoolingPlates;
global variable strPoolingWorklistFilePath;
global device ML_STAR ("Illumina Prep Methods\\16S rRNA\\16S_Metagenomic_Library_Prep_v2.0.lay", "ML_STAR", hslTrue);
global device HxFan ("Illumina Prep Methods\\16S rRNA\\16S_Metagenomic_Library_Prep_v2.0.lay", "HxFan", hslTrue);
global variable intDeckID;
global variable o_arrIndexPrimers1[];
global variable o_arrIndexPrimers2[];
global variable o_arrPlateWellPositions[];
dialog customDialog_1;
dialog customDialog_2;
dialog customDialog_3;
dialog customDialog_4;
dialog customDialog_5;
dialog customDialog_6;
dialog customDialog_7;
dialog customDialog_8;
dialog customDialog_9;
dialog customDialog_10;
dialog customDialog_11;
dialog customDialog_12;
dialog customDialog_13;
dialog customDialog_14;
dialog customDialog_15;
dialog customDialog_16;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    TRUSEQPREP::_InitLibrary();
    PLATEEDITOR96::_InitLibrary();
    STEPTRACKER::_InitLibrary();
    ILLUMINAEXPERIMENTMANAGERLIB::_InitLibrary();
    ERROREMAILALERT::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    io_arrIsSelected.SetSize(4);
    intDeckID = VectorDb_Deck::GetDeckID2(ML_STAR);
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    blnSimulationMode = Util::GetSimulationMode();
    AswStandardDialogs::Initialize();
    TRUSEQPREP::InitLiquidWasteSensor();
    HSLHamHeaterShaker::CreateUsbDevice(1, HHS_MIDI);
    HSLHamHeaterShaker::CreateUsbDevice(2, HHS_PCR);
    HSLHamHeaterShaker::CreateUsbDevice(3, HHS_3);
    ERROREMAILALERT::SetUserEmailAddress(Translate("16S Metagenomic DNA Library Prep"));
    if(0){
      customDialog_16.InitCustomDialog("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");
      customDialog_16.ShowCustomDialog();
    }
    {
      intJobLoopCounter = 0;
      while (1 == 1)
      {
        intJobLoopCounter = intJobLoopCounter + 1;
        SelectProcesses();
        if(0){
          customDialog_14.InitCustomDialog("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");
          customDialog_14.ShowCustomDialog();
        }
        _CalculateConsumables();
        if (io_arrIsSelected.ElementAt( 1 -1) == 1)
        {
          PCR_Preparation();
          AswStandardDialogs::MessageDialog(Translate("16S Metagenomic Library Prep"), AswStandardDialogs::IconType::Information, AswStandardDialogs::ButtonType::Ok, 0, 0, 0, Translate("PCR Preparation Complete. Click OK to unload carrier in order to place plate in thermocycler."));
          ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        }
        if (io_arrIsSelected.ElementAt( 2 -1) == 1)
        {
          PCR_CleanUp(fltBeadVolumePerSample, fltBeadVolumePerSample, fltEthanolVolumePerSample, fltElutionAdditionVolumePerSample, fltElutionVolumePerSample, fltBeadMixVolumePerSample);
          AswStandardDialogs::MessageDialog(Translate("16S Metagenomic Library Prep"), AswStandardDialogs::IconType::Information, AswStandardDialogs::ButtonType::Ok, 0, 0, 0, Translate("PCR Clean Up Complete.  Click OK to unload carrier."));
          ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        }
        if (io_arrIsSelected.ElementAt( 3 -1) == 1)
        {
          Quantification(strDilutionFactor);
          AswStandardDialogs::MessageDialog(Translate("16S Metagenomic Library Prep"), AswStandardDialogs::IconType::Information, AswStandardDialogs::ButtonType::Ok, 0, 0, 0, Translate("Quantification Setup Complete.  Click OK to unload carier."));
          ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        }
        if (io_arrIsSelected.ElementAt( 4 -1) == 1)
        {
          Pooling();
          AswStandardDialogs::MessageDialog(Translate("16S Metagenomic Library Prep"), AswStandardDialogs::IconType::Information, AswStandardDialogs::ButtonType::Ok, 0, 0, 0, Translate("Pooling Complete.  Click OK to unload carier."));
          ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
          ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        }
        blnRetValue = AswStandardDialogs::MessageDialog(Translate("16S Metagenomic Library Prep"), AswStandardDialogs::IconType::Question, AswStandardDialogs::ButtonType::YesNo, 0, 0, 0, Translate("Would you like to continue with a new job?"));
        if (blnRetValue == 7)
        {
          break;
        }
      }
    }
    blnRetValue = AswStandardDialogs::MessageDialog(Translate("16S Metagenomic Library Prep"), AswStandardDialogs::IconType::Question, AswStandardDialogs::ButtonType::YesNo, 0, 0, 0, Translate("Would you like to unload all carriers on deck?"));
    if (blnRetValue == 6)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    HSLHamHeaterShaker::StopAllShaker();
    HSLHamHeaterShaker::Terminate();
    if (io_arrIsSelected.ElementAt( 1 -1) == 1)
    {
      HSLInhecoTECLib::Terminate();
    }
    TRUSEQPREP::_ExitLibrary();
    PLATEEDITOR96::_ExitLibrary();
    STEPTRACKER::_ExitLibrary();
    ILLUMINAEXPERIMENTMANAGERLIB::_ExitLibrary();
    ERROREMAILALERT::_ExitLibrary();
  } }
