private function PCR_CleanUp( variable fltAMPureBeadVolume, variable fltAMPureBeadMixVolume, variable fltEthanolVolume, variable fltElutionVolume, variable fltEluateTransferVolume, variable fltTotalTemplateAndBeadVolume ) void ;
private function PCR_Preparation(  ) void ;
private function Pooling(  ) void ;
private function Quantification( variable i_intDilutionSetup ) void ;
private function SelectProcesses(  ) void ;
private function _CalculateConsumables(  ) void ;
private function _GenerateIndexPrimerSequences( variable & io_arrIndexPrimers[], variable & io_arrTargetWellPositions[], sequence & io_seqIndexPrimerSource, sequence & io_seqIndexPrimerTarget ) void ;
private function _Loading( variable & i_arrColumnHeaders[], variable i_strTopText, variable i_strBottomText, variable i_strTopImageFilePath, variable i_strBottomImageFilePath, variable & io_arrPositions[], variable & io_arrQuantities[], variable & io_arrDescriptions[] ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  AswStandardDialogs::Terminate();
  {
    	HxFan.SetFanOff("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"); // SetFanOff
  }
  {
    	HxFan.CloseComPort("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"); // CloseComPort
  }
  if (io_arrIsSelected.ElementAt( 1 -1) == 1)
  {
    HSLInhecoTECLib::StopTemperatureControl(0, 1, Translate(""));
    HSLInhecoTECLib::Terminate();
  }
  HSLHamHeaterShaker::StopAllShaker();
  HSLHamHeaterShaker::Terminate();
}

private function SelectProcesses(  ) void {
  private variable i_arrLabels[];
  private variable blnIsUserInputValidated;
  private variable loopCounter3;
  private variable intButtonChecked;
  private sequence seqDummy;
  private variable strPositionID;
  private variable i_arrIsEditable[];
  private variable i_arrTooltips[];
  private variable strSourceWell;
  private variable loopCounter1;
  private variable strTargetWell;
  private file file1;
  private variable strCommandString;
  private variable strPrimerWell;
  private variable fltSampleVolume;
  private variable fltPrimerVolume;
  private variable fltRgtVolume;
  private variable fltTotalVolume;
  private variable fltRgtAndPrimerMixVolume;
  private variable strSourceBC;
  private variable loopCounter2;
  blnIsUserInputValidated = ASWGLOBAL::BOOL::FALSE;
  i_arrLabels.SetSize(0);
  i_arrLabels.AddAsLast(Translate("PCR Preparation"));
  i_arrLabels.AddAsLast(Translate("PCR Cleanup"));
  i_arrLabels.AddAsLast(Translate("Quantification"));
  i_arrLabels.AddAsLast(Translate("Pooling"));
  i_arrIsEditable.SetSize(0);
  i_arrIsEditable.AddAsLast(ASWGLOBAL::BOOL::TRUE);
  i_arrIsEditable.AddAsLast(ASWGLOBAL::BOOL::TRUE);
  i_arrIsEditable.AddAsLast(ASWGLOBAL::BOOL::TRUE);
  i_arrIsEditable.AddAsLast(ASWGLOBAL::BOOL::TRUE);
  intButtonChecked = AswStandardDialogs::CheckBoxDialog(Translate("16S Metagenomic Library Prep"), AswStandardDialogs::ButtonType::OkCancel, 50, 0, Translate("Select one or more of these options.  Pooling has to be chosen separtely."), Translate("Press OK to start or Cancel to abort"), i_arrLabels, i_arrTooltips, i_arrIsEditable, io_arrIsSelected);
  if (intButtonChecked == 2)
  {
    abort;
  }
  if (io_arrIsSelected.ElementAt( 1 -1) == 1)
  {
    SeqRemoveAll(seqSourcePlate);
    SeqRemoveAll(seqTargetPlate);
    arrSampleVolumes.SetSize(0);
    arrTotalVolumes.SetSize(0);
    fltTotalVolume = 0;
    intButtonChecked = AswStandardDialogs::FileBrowserDialog(Translate("16S Metagenomic Library Prep"), AswStandardDialogs::ButtonType::OkCancel, 0, 0, Translate("Please select your PCR Preparation Worklist"), AswStandardDialogs::FileBrowserDialog::DialogType::Open, Translate("All files (*.*)|*.*"), 1, Translate(""), strWorklistFilePath);
    if (intButtonChecked == 2)
    {
      abort;
    }
    strCommandString = Translate("");
    strFileName = HSLExtensions::File::GetFileNameWithoutExtension(strWorklistFilePath);
    strCommandString = "SELECT [SourceWell], [SampleVolume], [RgtVolume], [TargetWell] FROM [" + strFileName + "#csv];";
    file1.AddField("SourceWell", strSourceWell, hslString, 255);
    file1.AddField("SampleVolume", fltSampleVolume, hslFloat);
    file1.AddField("RgtVolume", fltRgtVolume, hslFloat);
    file1.AddField("TargetWell", strTargetWell, hslString, 255);
    file1.SetDelimiter(hslCSVDelimited);
    if( 0 == file1.Open(strWorklistFilePath, hslRead, strCommandString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, strWorklistFilePath, "HxMetEdCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        SeqAdd(seqSourcePlate, Translate("HSP_Pipette"), strSourceWell);
        SeqAdd(seqTargetPlate, Translate("HSP_Pipette2"), strTargetWell);
        arrSampleVolumes.AddAsLast(fltSampleVolume);
        fltTotalVolume = fltSampleVolume + fltRgtVolume + 10;
        arrTotalVolumes.AddAsLast(fltTotalVolume);
      }
    }
    SeqResetSequenceIndexes(seqSourcePlate);
    SeqResetSequenceIndexes(seqTargetPlate);
  }
  if (io_arrIsSelected.ElementAt( 2 -1) == 1)
  {
    PLATEEDITOR96::EdiPlate96_custom(seqTargetPlate, ML_STAR.HSP_Pipette, Translate("Select Which Samples To Process:"), 0, seqDummy, seqDummy, 1);
    intNumberOfSamples = SeqGetMax(seqTargetPlate);
    SeqRemoveAll(ML_STAR.HSP_Pipette);
    SeqRemoveAll(ML_STAR.HSP_Pipette2);
    SeqRemoveAll(ML_STAR.HSP_Pipette3);
    SeqRemoveAll(ML_STAR.HSP_HHS2);
    SeqRemoveAll(ML_STAR.HSP_CPAC);
    SeqRemoveAll(ML_STAR.MIDI_Pipette);
    SeqRemoveAll(ML_STAR.MIDI_Pipette2);
    SeqRemoveAll(ML_STAR.MIDI_Pipette3);
    SeqRemoveAll(ML_STAR.MIDI_Pipette4);
    SeqRemoveAll(ML_STAR.MIDI_OnMagnet);
    SeqRemoveAll(ML_STAR.MIDI_HHS1);
    {
      loopCounter3 = 0;
      while (
         (seqTargetPlate.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seqTargetPlate, 1);
        loopCounter3 = loopCounter3 + 1;
        strPositionID = SeqGetPositionId(seqTargetPlate);
        SeqAdd(ML_STAR.HSP_Pipette, Translate("HSP_Pipette"), strPositionID);
        SeqAdd(ML_STAR.HSP_Pipette2, Translate("HSP_Pipette2"), strPositionID);
        SeqAdd(ML_STAR.HSP_Pipette3, Translate("HSP_Pipette3"), strPositionID);
        SeqAdd(ML_STAR.HSP_CPAC, Translate("HSP_CPAC"), strPositionID);
        SeqAdd(ML_STAR.HSP_HHS2, Translate("HSP_HHS2"), strPositionID);
        SeqAdd(ML_STAR.MIDI_HHS1, Translate("MIDI_HHS1"), strPositionID);
        SeqAdd(ML_STAR.MIDI_Pipette, Translate("MIDI_Pipette"), strPositionID);
        SeqAdd(ML_STAR.MIDI_Pipette2, Translate("MIDI_Pipette2"), strPositionID);
        SeqAdd(ML_STAR.MIDI_Pipette3, Translate("MIDI_Pipette3"), strPositionID);
        SeqAdd(ML_STAR.MIDI_Pipette4, Translate("MIDI_Pipette4"), strPositionID);
        SeqAdd(ML_STAR.MIDI_OnMagnet, Translate("MIDI_OnMagnet"), strPositionID);
        SeqIncrement(seqTargetPlate, 1);
        if (
           (seqTargetPlate.GetCurrentPosition() > 0 && seqTargetPlate.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seqTargetPlate.SetMax(seqTargetPlate.GetTotal());
      seqTargetPlate.SetCurrentPosition(1);
    }
    SeqResetSequenceIndexes(ML_STAR.HSP_Pipette);
    SeqResetSequenceIndexes(ML_STAR.HSP_Pipette2);
    SeqResetSequenceIndexes(ML_STAR.HSP_Pipette3);
    SeqResetSequenceIndexes(ML_STAR.HSP_CPAC);
    SeqResetSequenceIndexes(ML_STAR.HSP_HHS2);
    SeqResetSequenceIndexes(ML_STAR.MIDI_HHS1);
    SeqResetSequenceIndexes(ML_STAR.MIDI_OnMagnet);
    SeqResetSequenceIndexes(ML_STAR.MIDI_Pipette);
    SeqResetSequenceIndexes(ML_STAR.MIDI_Pipette2);
    SeqResetSequenceIndexes(ML_STAR.MIDI_Pipette3);
    SeqResetSequenceIndexes(ML_STAR.MIDI_Pipette4);
  }
  if (io_arrIsSelected.ElementAt( 3 -1) == 1)
  {
    PLATEEDITOR96::EdiPlate96_custom(seqTargetPlate, ML_STAR.HSP_Pipette, Translate("Select Which Samples To Process:"), 0, seqDummy, seqDummy, 1);
    intNumberOfSamples = SeqGetMax(seqTargetPlate);
    SeqRemoveAll(ML_STAR.HSP_Pipette);
    SeqRemoveAll(ML_STAR.HSP_Pipette2);
    SeqRemoveAll(ML_STAR.HSP_Pipette3);
    SeqRemoveAll(ML_STAR.HSP_HHS2);
    SeqRemoveAll(ML_STAR.HSP_CPAC);
    SeqRemoveAll(ML_STAR.MIDI_Pipette);
    SeqRemoveAll(ML_STAR.MIDI_Pipette2);
    SeqRemoveAll(ML_STAR.MIDI_Pipette3);
    SeqRemoveAll(ML_STAR.MIDI_Pipette4);
    SeqRemoveAll(ML_STAR.MIDI_OnMagnet);
    SeqRemoveAll(ML_STAR.MIDI_HHS1);
    {
      loopCounter3 = 0;
      while (
         (seqTargetPlate.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seqTargetPlate, 1);
        loopCounter3 = loopCounter3 + 1;
        strPositionID = SeqGetPositionId(seqTargetPlate);
        SeqAdd(ML_STAR.HSP_Pipette, Translate("HSP_Pipette"), strPositionID);
        SeqAdd(ML_STAR.HSP_Pipette2, Translate("HSP_Pipette2"), strPositionID);
        SeqAdd(ML_STAR.HSP_Pipette3, Translate("HSP_Pipette3"), strPositionID);
        SeqAdd(ML_STAR.HSP_CPAC, Translate("HSP_CPAC"), strPositionID);
        SeqAdd(ML_STAR.HSP_HHS2, Translate("HSP_HHS2"), strPositionID);
        SeqAdd(ML_STAR.MIDI_HHS1, Translate("MIDI_HHS1"), strPositionID);
        SeqAdd(ML_STAR.MIDI_Pipette, Translate("MIDI_Pipette"), strPositionID);
        SeqAdd(ML_STAR.MIDI_Pipette2, Translate("MIDI_Pipette2"), strPositionID);
        SeqAdd(ML_STAR.MIDI_Pipette3, Translate("MIDI_Pipette3"), strPositionID);
        SeqAdd(ML_STAR.MIDI_Pipette4, Translate("MIDI_Pipette4"), strPositionID);
        SeqAdd(ML_STAR.MIDI_OnMagnet, Translate("MIDI_OnMagnet"), strPositionID);
        SeqIncrement(seqTargetPlate, 1);
        if (
           (seqTargetPlate.GetCurrentPosition() > 0 && seqTargetPlate.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seqTargetPlate.SetMax(seqTargetPlate.GetTotal());
      seqTargetPlate.SetCurrentPosition(1);
    }
    SeqResetSequenceIndexes(ML_STAR.HSP_Pipette);
    SeqResetSequenceIndexes(ML_STAR.HSP_Pipette2);
    SeqResetSequenceIndexes(ML_STAR.HSP_Pipette3);
    SeqResetSequenceIndexes(ML_STAR.HSP_CPAC);
    SeqResetSequenceIndexes(ML_STAR.HSP_HHS2);
    SeqResetSequenceIndexes(ML_STAR.MIDI_HHS1);
    SeqResetSequenceIndexes(ML_STAR.MIDI_OnMagnet);
    SeqResetSequenceIndexes(ML_STAR.MIDI_Pipette);
    SeqResetSequenceIndexes(ML_STAR.MIDI_Pipette2);
    SeqResetSequenceIndexes(ML_STAR.MIDI_Pipette3);
    SeqResetSequenceIndexes(ML_STAR.MIDI_Pipette4);
  }
  if (io_arrIsSelected.ElementAt( 4 -1) == 1)
  {
    strPoolingWorklistFilePath = Translate("");
    {
      loopCounter2 = 0;
      while (strPoolingWorklistFilePath == "")
      {
        loopCounter2 = loopCounter2 + 1;
        intButtonChecked = AswStandardDialogs::FileBrowserDialog(Translate("CMMR DNA Library Prep"), AswStandardDialogs::ButtonType::OkCancel, 0, 0, Translate("Please select your Pooling Worklist"), AswStandardDialogs::FileBrowserDialog::DialogType::Open, Translate("CSV files (*.csv*)|*.csv*"), 1, Translate(""), strPoolingWorklistFilePath);
        if (intButtonChecked == 2)
        {
          abort;
        }
      }
    }
    strCommandString = Translate("");
    strFileName = HSLExtensions::File::GetFileNameWithoutExtension(strPoolingWorklistFilePath);
    strCommandString = "SELECT [SourceBC] FROM [" + strFileName + "#csv];";
    file1.AddField("SourceBC", strSourceBC, hslString, 255);
    file1.SetDelimiter(hslCSVDelimited);
    if( 0 == file1.Open(strPoolingWorklistFilePath, hslRead, strCommandString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, strPoolingWorklistFilePath, "HxMetEdCompCmd");
    }
    {
      intNumberOfSamples = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        intNumberOfSamples = intNumberOfSamples + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    strCommandString = "SELECT DISTINCT [SourceBC] FROM [" + strFileName + "#csv];";
    file1.AddField("SourceBC", strSourceBC, hslString, 255);
    file1.SetDelimiter(hslCSVDelimited);
    if( 0 == file1.Open(strPoolingWorklistFilePath, hslRead, strCommandString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, strPoolingWorklistFilePath, "HxMetEdCompCmd");
    }
    {
      intNumberOfPoolingPlates = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        intNumberOfPoolingPlates = intNumberOfPoolingPlates + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
  }
}

private function PCR_Preparation(  ) void {
  private variable intReadyMixLoopCounter;
  private variable intPrimerLoopCounter;
  private variable intSampleLoopCounter;
  private variable intIndex;
  private variable intNumberOfUsedPositions;
  private variable loopCounter1;
  private variable fltRgtVolume;
  private variable strReagentName;
  private variable strRgtName;
  private variable strTargetWell;
  private file file1;
  private variable strCommandString;
  private variable strLabwareId;
  private variable strDescription;
  private variable intUsedPositions;
  private variable loopCounter2;
  private sequence seqReagentSource;
  private sequence seqReagentTarget;
  private variable arrReagentVolumes[];
  private variable strPositionId;
  private variable strBottomImageFilePath;
  private sequence arrStripWellSequences[];
  private sequence seqIndexPrimerSource;
  private sequence seqIndexPrimerTarget;
  private variable arrIndexPrimersToProcess[];
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  //PCR Plate Loading Dialog information
  strTopText = "Please reload the following HSP Plate Carrier as shown:";
  strBottomText = "Make sure that the carrier starts at Track 36.";
  strTopImageFilePath = "C:\\Program Files (x86)\\HAMILTON\\Methods\\Illumina16S_LoadingImages\\Tip1000uLAndHSPCarrierLoadDialog.png";
  strBottomImageFilePath = "";
  {
    for(intHSPCarrierLoopCounter = 0; intHSPCarrierLoopCounter < 5;)
    {
      intHSPCarrierLoopCounter = intHSPCarrierLoopCounter + 1;
      strPosition = StrIStr(intHSPCarrierLoopCounter);
      arrPositions.AddAsLast(strPosition);
      if (intHSPCarrierLoopCounter <= 2)
      {
        arrQuantities.AddAsLast(Translate("-"));
        arrDescriptions.AddAsLast(Translate("-"));
      }
    }
  }
  arrQuantities.AddAsLast(Translate("1 MTP"));
  arrDescriptions.AddAsLast(Translate("DNA Plate"));
  arrQuantities.AddAsLast(Translate("1 HSP"));
  arrDescriptions.AddAsLast(Translate("Clean PCR Plate"));
  arrQuantities.AddAsLast(Translate(" - "));
  arrDescriptions.AddAsLast(Translate(" - "));
  if(0){
    arrQuantities.AddAsLast(Translate("1 HSP"));
    arrDescriptions.AddAsLast(Translate("Index Adapter Plate"));
  }
  _Loading(arrColumnHeaders, strTopText, strBottomText, strTopImageFilePath, strBottomImageFilePath, arrPositions, arrQuantities, arrDescriptions);
  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  MECC::TraceComment(Translate("Adding PCR Master Mix To PCR Plate"));
  {
    for(loopCounter1 = 0; loopCounter1 < intNumberOfReagentsInTroughs;)
    {
      loopCounter1 = loopCounter1 + 1;
      arrReagentVolumes.SetSize(0);
      strReagentName=arrReagentsInTroughs.GetAt(loopCounter1-1);
      strCommandString = Translate("");
      strCommandString = "SELECT [RgtName], [RgtVolume], [TargetWell] FROM [" + strFileName + "#csv] WHERE [RgtName] = '" + strReagentName + "';";
      file1.AddField("RgtName", strRgtName, hslString, 255);
      file1.AddField("RgtVolume", fltRgtVolume, hslFloat);
      file1.AddField("TargetWell", strTargetWell, hslString, 255);
      file1.SetDelimiter(hslCSVDelimited);
      if( 0 == file1.Open(strWorklistFilePath, hslRead, strCommandString) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, strWorklistFilePath, "HxMetEdCompCmd");
      }
      strLabwareId = StrConcat2(Translate("Trough_"), loopCounter1);
      SeqRemoveAll(seqReagentSource);
      SeqRemoveAll(seqReagentTarget);
      {
        loopCounter2 = 0;
        while (
           (file1.Eof() == 0)
        )
        {
          loopCounter2 = loopCounter2 + 1;
          if( 0 == file1.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          strPositionId = StrIStr(loopCounter2);
          SeqAdd(seqReagentSource, strLabwareId, strPositionId);
          SeqAdd(seqReagentTarget, Translate("HSP_Pipette2"), strTargetWell);
          arrReagentVolumes.AddAsLast(fltRgtVolume);
        }
      }
      SeqResetSequenceIndexes(seqReagentSource);
      SeqResetSequenceIndexes(seqReagentTarget);
      TRACELEVEL::Release_TraceSequence(seqReagentSource);
      TRACELEVEL::Release_TraceSequence(seqReagentTarget);
      strDescription = StrConcat4(Translate("Adding "), strReagentName, Translate(" to PCR Plate."), Translate(""));
      STEPTRACKER::START_Activity(Translate("PCR Master Mix Addition"), strDescription, 19, 1);
      intIndex = 1;
      {
        intReadyMixLoopCounter = 0;
        while (
           (seqReagentTarget.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.MlStar50ulTipWithFilter, 1, seqReagentSource, 1, seqReagentTarget, 1);
          intReadyMixLoopCounter = intReadyMixLoopCounter + 1;
          {
            	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
          }
          {
            	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
          }
          intUsedPositions = SeqGetUsedPositions(seqReagentTarget);
          intIndex = intIndex + intUsedPositions;
          if (
             (seqReagentTarget.GetCurrentPosition() > 0 && seqReagentTarget.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.MlStar50ulTipWithFilter.SetMax(ML_STAR.MlStar50ulTipWithFilter.GetTotal());
        seqReagentSource.SetMax(seqReagentSource.GetTotal());
        seqReagentTarget.SetMax(seqReagentTarget.GetTotal());
        seqReagentSource.SetCurrentPosition(1);
        seqReagentTarget.SetCurrentPosition(1);
      }
      STEPTRACKER::TERMINATE_Activity();
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
  }
  {
    for(loopCounter1 = 0; loopCounter1 < intNumberOfReagentsIn5mLTubes;)
    {
      loopCounter1 = loopCounter1 + 1;
      arrReagentVolumes.SetSize(0);
      strReagentName=arrReagentsIn5mLTubes.GetAt(loopCounter1-1);
      strCommandString = Translate("");
      strCommandString = "SELECT [RgtName], [RgtVolume], [TargetWell] FROM [" + strFileName + "#csv] WHERE [RgtName] = '" + strReagentName + "';";
      file1.AddField("RgtName", strRgtName, hslString, 255);
      file1.AddField("RgtVolume", fltRgtVolume, hslFloat);
      file1.AddField("TargetWell", strTargetWell, hslString, 255);
      file1.SetDelimiter(hslCSVDelimited);
      if( 0 == file1.Open(strWorklistFilePath, hslRead, strCommandString) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, strWorklistFilePath, "HxMetEdCompCmd");
      }
      strLabwareId = StrConcat2(Translate("Trough_"), loopCounter1);
      SeqRemoveAll(seqReagentSource);
      SeqRemoveAll(seqReagentTarget);
      {
        loopCounter2 = 0;
        while (
           (file1.Eof() == 0)
        )
        {
          loopCounter2 = loopCounter2 + 1;
          if( 0 == file1.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          strPositionId = StrIStr(loopCounter1);
          SeqAdd(seqReagentSource, Translate("Vial_Car_24_Lasso"), strPositionId);
          SeqAdd(seqReagentTarget, Translate("HSP_Pipette2"), strTargetWell);
          arrReagentVolumes.AddAsLast(fltRgtVolume);
        }
      }
      SeqResetSequenceIndexes(seqReagentSource);
      SeqResetSequenceIndexes(seqReagentTarget);
      TRACELEVEL::Release_TraceSequence(seqReagentSource);
      TRACELEVEL::Release_TraceSequence(seqReagentTarget);
      strDescription = StrConcat4(Translate("Adding "), strReagentName, Translate(" to PCR Plate."), Translate(""));
      STEPTRACKER::START_Activity(Translate("PCR Master Mix Addition"), strDescription, 19, 1);
      intIndex = 1;
      {
        intReadyMixLoopCounter = 0;
        while (
           (seqReagentTarget.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.MlStar50ulTipWithFilter, 1, seqReagentSource, 1, seqReagentTarget, 1);
          intReadyMixLoopCounter = intReadyMixLoopCounter + 1;
          {
            	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
          }
          {
            	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
          }
          intUsedPositions = SeqGetUsedPositions(seqReagentTarget);
          intIndex = intIndex + intUsedPositions;
          if (
             (seqReagentTarget.GetCurrentPosition() > 0 && seqReagentTarget.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.MlStar50ulTipWithFilter.SetMax(ML_STAR.MlStar50ulTipWithFilter.GetTotal());
        seqReagentSource.SetMax(seqReagentSource.GetTotal());
        seqReagentTarget.SetMax(seqReagentTarget.GetTotal());
        seqReagentSource.SetCurrentPosition(1);
        seqReagentTarget.SetCurrentPosition(1);
      }
      STEPTRACKER::TERMINATE_Activity();
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
  }
  {
    for(loopCounter1 = 0; loopCounter1 < intNumberOfReagentsIn2mLTubes;)
    {
      loopCounter1 = loopCounter1 + 1;
      arrReagentVolumes.SetSize(0);
      strReagentName=arrReagentsIn2mLTubes.GetAt(loopCounter1-1);
      strCommandString = Translate("");
      strCommandString = "SELECT [RgtName], [RgtVolume], [TargetWell] FROM [" + strFileName + "#csv] WHERE [RgtName] = '" + strReagentName + "';";
      file1.AddField("RgtName", strRgtName, hslString, 255);
      file1.AddField("RgtVolume", fltRgtVolume, hslFloat);
      file1.AddField("TargetWell", strTargetWell, hslString, 255);
      file1.SetDelimiter(hslCSVDelimited);
      if( 0 == file1.Open(strWorklistFilePath, hslRead, strCommandString) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, strWorklistFilePath, "HxMetEdCompCmd");
      }
      strLabwareId = StrConcat2(Translate("Trough_"), loopCounter1);
      SeqRemoveAll(seqReagentSource);
      SeqRemoveAll(seqReagentTarget);
      {
        loopCounter2 = 0;
        while (
           (file1.Eof() == 0)
        )
        {
          loopCounter2 = loopCounter2 + 1;
          if( 0 == file1.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          strPositionId = StrIStr(loopCounter1);
          SeqAdd(seqReagentSource, Translate("SMP_CAR_32_VIALS_Lasso"), strPositionId);
          SeqAdd(seqReagentTarget, Translate("HSP_Pipette2"), strTargetWell);
          arrReagentVolumes.AddAsLast(fltRgtVolume);
        }
      }
      SeqResetSequenceIndexes(seqReagentSource);
      SeqResetSequenceIndexes(seqReagentTarget);
      TRACELEVEL::Release_TraceSequence(seqReagentSource);
      TRACELEVEL::Release_TraceSequence(seqReagentTarget);
      strDescription = StrConcat4(Translate("Adding "), strReagentName, Translate(" to PCR Plate."), Translate(""));
      STEPTRACKER::START_Activity(Translate("PCR Master Mix Addition"), strDescription, 19, 1);
      intIndex = 1;
      {
        intReadyMixLoopCounter = 0;
        while (
           (seqReagentTarget.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.MlStar50ulTipWithFilter, 1, seqReagentSource, 1, seqReagentTarget, 1);
          intReadyMixLoopCounter = intReadyMixLoopCounter + 1;
          {
            	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
          }
          {
            	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
          }
          intUsedPositions = SeqGetUsedPositions(seqReagentTarget);
          intIndex = intIndex + intUsedPositions;
          if (
             (seqReagentTarget.GetCurrentPosition() > 0 && seqReagentTarget.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.MlStar50ulTipWithFilter.SetMax(ML_STAR.MlStar50ulTipWithFilter.GetTotal());
        seqReagentSource.SetMax(seqReagentSource.GetTotal());
        seqReagentTarget.SetMax(seqReagentTarget.GetTotal());
        seqReagentSource.SetCurrentPosition(1);
        seqReagentTarget.SetCurrentPosition(1);
      }
      STEPTRACKER::TERMINATE_Activity();
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
  }
  {
    for(loopCounter1 = 0; loopCounter1 < intNumberOfReagentsInStripWells;)
    {
      loopCounter1 = loopCounter1 + 1;
      arrStripWellSequences.SetSize(0);
      arrStripWellSequences.AddAsLast(ML_STAR.seqStripWell1);
      arrStripWellSequences.AddAsLast(ML_STAR.seqStripWell2);
      arrStripWellSequences.AddAsLast(ML_STAR.seqStripWell3);
      arrStripWellSequences.AddAsLast(ML_STAR.seqStripWell4);
      arrStripWellSequences.AddAsLast(ML_STAR.seqStripWell5);
      arrStripWellSequences.AddAsLast(ML_STAR.seqStripWell6);
      arrStripWellSequences.AddAsLast(ML_STAR.seqStripWell7);
      arrStripWellSequences.AddAsLast(ML_STAR.seqStripWell8);
      arrStripWellSequences.AddAsLast(ML_STAR.seqStripWell9);
      arrStripWellSequences.AddAsLast(ML_STAR.seqStripWell10);
      arrStripWellSequences.AddAsLast(ML_STAR.seqStripWell11);
      arrStripWellSequences.AddAsLast(ML_STAR.seqStripWell12);
      arrReagentVolumes.SetSize(0);
      strReagentName=arrReagentsInStripWells.GetAt(loopCounter1-1);
      strCommandString = Translate("");
      strCommandString = "SELECT [RgtName], [RgtVolume], [TargetWell] FROM [" + strFileName + "#csv] WHERE [RgtName] = '" + strReagentName + "';";
      file1.AddField("RgtName", strRgtName, hslString, 255);
      file1.AddField("RgtVolume", fltRgtVolume, hslFloat);
      file1.AddField("TargetWell", strTargetWell, hslString, 255);
      file1.SetDelimiter(hslCSVDelimited);
      if( 0 == file1.Open(strWorklistFilePath, hslRead, strCommandString) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, strWorklistFilePath, "HxMetEdCompCmd");
      }
      SeqRemoveAll(seqReagentSource);
      SeqRemoveAll(seqReagentTarget);
      {
        loopCounter2 = 0;
        while (
           (file1.Eof() == 0)
        )
        {
          loopCounter2 = loopCounter2 + 1;
          if( 0 == file1.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          strPositionId = StrIStr(loopCounter1);
          SeqAdd(seqReagentTarget, Translate("HSP_Pipette2"), strTargetWell);
          arrReagentVolumes.AddAsLast(fltRgtVolume);
        }
      }
      SeqCopySequence(seqReagentSource, arrStripWellSequences.ElementAt( loopCounter1 -1));
      SeqResetSequenceIndexes(seqReagentSource);
      SeqResetSequenceIndexes(seqReagentTarget);
      TRACELEVEL::Release_TraceSequence(seqReagentSource);
      TRACELEVEL::Release_TraceSequence(seqReagentTarget);
      strDescription = StrConcat4(Translate("Adding "), strReagentName, Translate(" to PCR Plate."), Translate(""));
      STEPTRACKER::START_Activity(Translate("PCR Master Mix Addition"), strDescription, 19, 1);
      intIndex = 1;
      {
        intReadyMixLoopCounter = 0;
        while (
           (seqReagentTarget.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.MlStar50ulTipWithFilter, 1, seqReagentSource, 1, seqReagentTarget, 1);
          intReadyMixLoopCounter = intReadyMixLoopCounter + 1;
          {
            	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
          }
          {
            	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
          }
          intUsedPositions = SeqGetUsedPositions(seqReagentTarget);
          intIndex = intIndex + intUsedPositions;
          if (
             (seqReagentTarget.GetCurrentPosition() > 0 && seqReagentTarget.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.MlStar50ulTipWithFilter.SetMax(ML_STAR.MlStar50ulTipWithFilter.GetTotal());
        seqReagentSource.SetMax(seqReagentSource.GetTotal());
        seqReagentTarget.SetMax(seqReagentTarget.GetTotal());
        seqReagentSource.SetCurrentPosition(1);
        seqReagentTarget.SetCurrentPosition(1);
      }
      STEPTRACKER::TERMINATE_Activity();
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
  }
  MECC::TraceComment(Translate("Adding Index Primers to PCR Plate"));
  STEPTRACKER::START_Activity(Translate("Index Primers Addition"), Translate("Adding Index Primers into NTA Plate"), 22, 1);
  MECC::TraceComment(Translate("Build Index Primer sequence"));
  {
    for(loopCounter1 = 0; loopCounter1 < 2;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        arrIndexPrimersToProcess=o_arrIndexPrimers1;
      }
      else
      {
        arrIndexPrimersToProcess=o_arrIndexPrimers2;
      }
      _GenerateIndexPrimerSequences(arrIndexPrimersToProcess, o_arrPlateWellPositions, seqIndexPrimerSource, seqIndexPrimerTarget);
      {
        intPrimerLoopCounter = 0;
        seqIndexPrimerSource.SetCurrentPosition(1);
        seqIndexPrimerTarget.SetCurrentPosition(1);
        while (
           (seqIndexPrimerTarget.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.MlStar50ulTipWithFilter, 1, seqIndexPrimerSource, 1, seqIndexPrimerTarget, 1);
          intPrimerLoopCounter = intPrimerLoopCounter + 1;
          {
            	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
          }
          {
            	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
          }
          if (
             (seqIndexPrimerTarget.GetCurrentPosition() > 0 && seqIndexPrimerTarget.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.MlStar50ulTipWithFilter.SetMax(ML_STAR.MlStar50ulTipWithFilter.GetTotal());
        seqIndexPrimerSource.SetMax(seqIndexPrimerSource.GetTotal());
        seqIndexPrimerTarget.SetMax(seqIndexPrimerTarget.GetTotal());
      }
    }
  }
  STEPTRACKER::TERMINATE_Activity();
  if(0){
    TRACELEVEL::Release_TraceSequence(seqPrimerPlate);
    TRACELEVEL::Release_TraceSequence(seqTargetPlate);
    STEPTRACKER::START_Activity(Translate("Index Primers Addition"), Translate("Adding Index Primers to PCR Plate"), 22, 1);
    intIndex = 1;
    {
      intPrimerLoopCounter = 0;
      while (
         (seqTargetPlate.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar50ulTipWithFilter, 1, seqPrimerPlate, 1, seqTargetPlate, 1);
        intPrimerLoopCounter = intPrimerLoopCounter + 1;
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        intNumberOfUsedPositions = SeqGetUsedPositions(seqTargetPlate);
        intIndex = intIndex + intNumberOfUsedPositions;
        if (
           (seqTargetPlate.GetCurrentPosition() > 0 && seqTargetPlate.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar50ulTipWithFilter.SetMax(ML_STAR.MlStar50ulTipWithFilter.GetTotal());
      seqPrimerPlate.SetMax(seqPrimerPlate.GetTotal());
      seqTargetPlate.SetMax(seqTargetPlate.GetTotal());
      seqPrimerPlate.SetCurrentPosition(1);
      seqTargetPlate.SetCurrentPosition(1);
    }
    STEPTRACKER::TERMINATE_Activity();
  }
  MECC::TraceComment(Translate("Adding DNA Sample to PCR Plate"));
  TRACELEVEL::Release_TraceSequence(seqSourcePlate);
  TRACELEVEL::Release_TraceSequence(seqTargetPlate);
  STEPTRACKER::START_Activity(Translate("Sample Addition"), Translate("Adding DNA Sample to PCR Plate"), 22, 1);
  intIndex = 1;
  {
    intSampleLoopCounter = 0;
    while (
       (seqSourcePlate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.MlStar50ulTipWithFilter, 1, seqSourcePlate, 1, seqTargetPlate, 1);
      intSampleLoopCounter = intSampleLoopCounter + 1;
      {
        	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
      }
      {
        	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
      }
      intNumberOfUsedPositions = SeqGetUsedPositions(seqTargetPlate);
      intIndex = intIndex + intNumberOfUsedPositions;
      if (
         (seqSourcePlate.GetCurrentPosition() > 0 && seqSourcePlate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.MlStar50ulTipWithFilter.SetMax(ML_STAR.MlStar50ulTipWithFilter.GetTotal());
    seqSourcePlate.SetMax(seqSourcePlate.GetTotal());
    seqTargetPlate.SetMax(seqTargetPlate.GetTotal());
    seqSourcePlate.SetCurrentPosition(1);
    seqTargetPlate.SetCurrentPosition(1);
  }
  STEPTRACKER::TERMINATE_Activity();
  MECC::TraceComment(Translate("PCR Preparation Completed"));
}

private function _Loading( variable & i_arrColumnHeaders[], variable i_strTopText, variable i_strBottomText, variable i_strTopImageFilePath, variable i_strBottomImageFilePath, variable & io_arrPositions[], variable & io_arrQuantities[], variable & io_arrDescriptions[] ) void {
  private variable intResult;
  AswStandardDialogs::LoadingDialogSetResources(i_arrColumnHeaders);
  intResult = AswStandardDialogs::LoadingDialog(Translate("Load the following Carrier"), AswStandardDialogs::ButtonType::OkCancel, 900, 800, 0, i_strTopText, i_strBottomText, i_strTopImageFilePath, i_strBottomImageFilePath, 700, io_arrPositions, io_arrQuantities, io_arrDescriptions);
  if (intResult == 2)
  {
    abort;
  }
  io_arrPositions.SetSize(0);
  io_arrQuantities.SetSize(0);
  io_arrDescriptions.SetSize(0);
}

private function _CalculateConsumables(  ) void {
  private variable intNumberOf300uLTips;
  private variable intNumberOf50uLTips;
  private variable intNumberOfMIDIPlates;
  private variable intNumberOfHSPPlates;
  private variable strNumberOf50uLTips;
  private variable strNumberOf300uLTips;
  private variable strNumberOfMIDIPlates;
  private variable strNumberOfHSPPlates;
  private variable blnEnoughHSPsOnCarrier;
  private variable blnEnoughMIDIsOnCarrier;
  private variable intResult;
  private variable blnLoadTroughCarrier;
  private variable blnLoad24PositionSampleCarrier;
  private variable blnLoad32PositionSampleCarrier;
  private variable blnLoadMIDIPlateCarrier;
  private variable blnLoadPlateStackerCarrier;
  private variable arr300uLTipLabIDs[];
  private variable arr50uLTipLabIDs[];
  private variable fltReadyMixVolume;
  private variable strReadyMixVolume;
  private variable strBeadVolume;
  private variable strEthanolVolume;
  private variable strCommandString;
  private variable strRgtContainer;
  private variable strRgtName;
  private file file1;
  private variable intNumberOfReagents;
  private variable arrReagentNames[];
  private variable strTotalVolume;
  private variable intIndex;
  private variable strReagentName;
  private variable fltRgtVolume;
  private variable loopCounter1;
  private variable fltTotalVolume;
  private variable strTEBufferVolume;
  private variable strPicogreenVolume;
  private variable fltPicogreenVolume;
  private variable fltTEBufferVolume;
  private variable strElutionVolume;
  private variable fltBeadVolume;
  private variable fltEthanolVolume;
  private variable fltElutionVolume;
  private dialog dialogHandle_1;
  private variable strBottomImageFilePath;
  private variable strSampleName;
  private variable intNumberOfIndexPrimer1;
  private variable intNumberOfIndexPrimer2;
  private variable intTotalNumberOfIndexPrimers;
  private variable arrTotalIndexPrimers[];
  private variable blnLoadIndexPrimerCarrier;
  private sequence seqIndexPrimers[];
  private variable intButtonChecked;
  private variable strLabwareId;
  private variable blnPrimerLoaded;
  private variable intNumberOfPrimersFound;
  private variable strDescription;
  private variable intParentId;
  private variable blnIndexPrimersLoaded;
  private variable strBarcode;
  private variable strDummy;
  private variable strPositionId;
  private variable intPositionCounter;
  private variable blnAllIndexPrimersPresent;
  private variable intIndexPrimerLoopCounter1;
  private variable intIndexPrimerLoopCounter2;
  private variable intIndexPrimerLoopCounter3;
  private variable arrIndexPrimerCarrierElementIds[];
  private variable arrMissingIndexPrimers[];
  TRACELEVEL::SetTraceLevel(TRACE_LEVEL_RELEASE);
  blnEnoughHSPsOnCarrier = ASWGLOBAL::BOOL::FALSE;
  blnEnoughMIDIsOnCarrier = ASWGLOBAL::BOOL::FALSE;
  blnLoadPlateStackerCarrier = ASWGLOBAL::BOOL::FALSE;
  blnLoadTroughCarrier = ASWGLOBAL::BOOL::FALSE;
  blnLoad24PositionSampleCarrier = ASWGLOBAL::BOOL::FALSE;
  blnLoad32PositionSampleCarrier = ASWGLOBAL::BOOL::FALSE;
  blnLoadMIDIPlateCarrier = ASWGLOBAL::BOOL::FALSE;
  blnLoadIndexPrimerCarrier = ASWGLOBAL::BOOL::FALSE;
  fltReadyMixVolume = 0;
  strReadyMixVolume = Translate("");
  fltBeadVolume = 0;
  strBeadVolume = Translate("");
  fltElutionVolume = 0;
  strElutionVolume = Translate("");
  fltEthanolVolume = 0;
  strEthanolVolume = Translate("");
  fltPicogreenVolume = 0;
  strPicogreenVolume = Translate("");
  fltTEBufferVolume = 0;
  strTEBufferVolume = Translate("");
  intNumberOfMIDIPlates = 0;
  intNumberOfHSPPlates = 0;
  strNumberOfHSPPlates = Translate("");
  strNumberOfMIDIPlates = Translate("");
  intNumberOf300uLTips = 0;
  intNumberOf50uLTips = 0;
  strNumberOf300uLTips = Translate("");
  strNumberOf50uLTips = Translate("");
  arr50uLTipLabIDs.SetSize(0);
  arr50uLTipLabIDs.AddAsLast(Translate("TIP_CAR_480BC_TIP_50F_2"));
  arr50uLTipLabIDs.AddAsLast(Translate("TIP_CAR_480BC_TIP_50F_1"));
  arr300uLTipLabIDs.SetSize(0);
  arr300uLTipLabIDs.AddAsLast(Translate("TIP_CAR_480BC_STF_2"));
  arr300uLTipLabIDs.AddAsLast(Translate("TIP_CAR_480BC_STF_1"));
  strPosition = Translate("");
  strTopText = Translate("");
  strBottomText = Translate("");
  strTopImageFilePath = Translate("");
  strBottomImageFilePath = Translate("");
  arrColumnHeaders.SetSize(3);
  arrColumnHeaders.SetAt(1-1, Translate("Position"));
  arrColumnHeaders.SetAt(2-1, Translate("Quantity"));
  arrColumnHeaders.SetAt(3-1, Translate("Description"));
  arrPositions.SetSize(0);
  arrQuantities.SetSize(0);
  arrDescriptions.SetSize(0);
  strCommandString = Translate("");
  strTotalVolume = Translate("");
  arrReagentNames.SetSize(0);
  arrReagentsInTroughs.SetSize(0);
  arrReagentsIn2mLTubes.SetSize(0);
  arrReagentsIn5mLTubes.SetSize(0);
  arrReagentsInStripWells.SetSize(0);
  if (io_arrIsSelected.ElementAt( 1 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    strFileName = HSLExtensions::File::GetFileNameWithoutExtension(strWorklistFilePath);
    strCommandString = "SELECT [SampleName] FROM [" + strFileName + "#csv];";
    file1.AddField("SampleName", strSampleName, hslString, 255);
    file1.SetDelimiter(hslCSVDelimited);
    if( 0 == file1.Open(strWorklistFilePath, hslRead, strCommandString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, strWorklistFilePath, "HxMetEdCompCmd");
    }
    {
      intNumberOfSamples = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        intNumberOfSamples = intNumberOfSamples + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    TRACELEVEL::Release_Trace2(Translate("Number of Samples in Worklist: "), intNumberOfSamples);
    strFileName = HSLExtensions::File::GetFileNameWithoutExtension(strWorklistFilePath);
    strCommandString = "SELECT DISTINCT [RgtName], [RgtContainer] FROM [" + strFileName + "#csv];";
    file1.AddField("RgtName", strRgtName, hslString, 255);
    file1.AddField("RgtContainer", strRgtContainer, hslString, 255);
    file1.SetDelimiter(hslCSVDelimited);
    if( 0 == file1.Open(strWorklistFilePath, hslRead, strCommandString) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, strWorklistFilePath, "HxMetEdCompCmd");
    }
    {
      intNumberOfReagents = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        intNumberOfReagents = intNumberOfReagents + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        arrReagentNames.AddAsLast(strRgtName);
        if (strRgtContainer == "Trough")
        {
          blnLoadTroughCarrier = ASWGLOBAL::BOOL::TRUE;
          arrReagentsInTroughs.AddAsLast(strRgtName);
        }
        if (strRgtContainer == "2mLTube")
        {
          blnLoad32PositionSampleCarrier = ASWGLOBAL::BOOL::TRUE;
          arrReagentsIn2mLTubes.AddAsLast(strRgtName);
        }
        if (strRgtContainer == "5mLTube")
        {
          blnLoad24PositionSampleCarrier = ASWGLOBAL::BOOL::TRUE;
          arrReagentsIn5mLTubes.AddAsLast(strRgtName);
        }
        if (strRgtContainer == "MasterMixPlate")
        {
          blnLoadMIDIPlateCarrier = ASWGLOBAL::BOOL::TRUE;
          arrReagentsInStripWells.AddAsLast(strRgtName);
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    intNumberOfReagentsInTroughs=arrReagentsInTroughs.GetSize();
    intNumberOfReagentsIn2mLTubes=arrReagentsIn2mLTubes.GetSize();
    intNumberOfReagentsIn5mLTubes=arrReagentsIn5mLTubes.GetSize();
    intNumberOfReagentsInStripWells=arrReagentsInStripWells.GetSize();
    TRACELEVEL::Release_TraceArray(arrReagentsInTroughs, Translate("Reagents in Troughs: "));
    TRACELEVEL::Release_TraceArray(arrReagentsIn2mLTubes, Translate("Reagents in 2mL Tubes: "));
    TRACELEVEL::Release_TraceArray(arrReagentsIn5mLTubes, Translate("Reagents in 5mL Tubes: "));
    TRACELEVEL::Release_TraceArray(arrReagentsInStripWells, Translate("Reagents in Strip Wells: "));
    ILLUMINAEXPERIMENTMANAGERLIB::ImportSamplePlateFile(arrTotalIndexPrimers, o_arrPlateWellPositions, o_arrIndexPrimers1, o_arrIndexPrimers2);
    intTotalNumberOfIndexPrimers=arrTotalIndexPrimers.GetSize();
    intNumberOfIndexPrimer1=o_arrIndexPrimers1.GetSize();
    intNumberOfIndexPrimer2=o_arrIndexPrimers2.GetSize();
    intNumberOf50uLTips = intNumberOf50uLTips + (8 * intNumberOfReagents) + intNumberOfSamples + intNumberOfIndexPrimer1 + intNumberOfIndexPrimer2;
    blnLoadIndexPrimerCarrier = ASWGLOBAL::BOOL::TRUE;
  }
  if (io_arrIsSelected.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    arrInputHeaders.SetSize(0);
    arrInputListLabels.SetSize(0);
    arrInputListValues.SetSize(0);
    arrInputListUnits.SetSize(0);
    arrDataTypes.SetSize(0);
    arrRanges.SetSize(0);
    arrColumnHeaders.AddAsLast(Translate("Description"));
    arrColumnHeaders.AddAsLast(Translate("Value"));
    arrColumnHeaders.AddAsLast(Translate("Type"));
    AswStandardDialogs::InputDialogSetResources(arrColumnHeaders);
    arrInputListLabels.AddAsLast(Translate("Template Volume (uL)"));
    arrInputListLabels.AddAsLast(Translate("Bead Mix Volume (uL)"));
    arrInputListLabels.AddAsLast(Translate("Wash Buffer Volume (uL)"));
    arrInputListLabels.AddAsLast(Translate("Elution Buffer Volume (uL)"));
    arrInputListValues.AddAsLast(Translate("50"));
    arrInputListValues.AddAsLast(Translate("30"));
    arrInputListValues.AddAsLast(Translate("200"));
    arrInputListValues.AddAsLast(Translate("50"));
    arrInputListUnits.AddAsLast(Translate("Double"));
    arrInputListUnits.AddAsLast(Translate("Double"));
    arrInputListUnits.AddAsLast(Translate("Double"));
    arrInputListUnits.AddAsLast(Translate("Double"));
    arrDataTypes.AddAsLast(3);
    arrDataTypes.AddAsLast(3);
    arrDataTypes.AddAsLast(3);
    arrDataTypes.AddAsLast(3);
    arrRanges.AddAsLast(Translate("1|50"));
    arrRanges.AddAsLast(Translate("1|50"));
    arrRanges.AddAsLast(Translate("1|300"));
    arrRanges.AddAsLast(Translate("1|50"));
    intResult = AswStandardDialogs::InputDialog(Translate("16S Metagenomic Library Preparation"), AswStandardDialogs::ButtonType::OkCancel, 0, 0, Translate("Please configure your clean up settings"), Translate("Press 'OK' to continue, 'Cancel' to abort."), arrInputListLabels, arrInputListValues, arrInputListUnits, arrDataTypes, arrRanges, arrCustomToolTip, o_arrResult);
    if (intResult == 2)
    {
      abort;
    }
    fltBeadVolumePerSample = o_arrResult.ElementAt( 2 -1);
    fltEthanolVolumePerSample = o_arrResult.ElementAt( 3 -1);
    fltElutionVolumePerSample = o_arrResult.ElementAt( 4 -1);
    fltBeadMixVolumePerSample = o_arrResult.ElementAt( 1 -1) + o_arrResult.ElementAt( 2 -1);
    fltElutionAdditionVolumePerSample = o_arrResult.ElementAt( 4 -1) + 2.5;
    intNumberOfHSPPlates = intNumberOfHSPPlates + 1;
    intNumberOfMIDIPlates = intNumberOfMIDIPlates + 1;
    intNumberOf50uLTips   = intNumberOf50uLTips   + (intNumberOfSamples * 2);
    intNumberOf300uLTips   = intNumberOf300uLTips   + (intNumberOfSamples * 4) + 24;
    //Calculate Bead Volume
    fltBeadVolume = fltBeadVolumePerSample * intNumberOfSamples;
    fltBeadVolume = fltBeadVolume + 500;
    fltBeadVolume = MthCeiling(fltBeadVolume);
    strBeadVolume = StrIStr(fltBeadVolume);
    strBeadVolume = StrConcat2(strBeadVolume, " uL");
    //Calculate Ethanol Volume
    fltEthanolVolume = 2 * fltEthanolVolumePerSample * intNumberOfSamples;
    fltEthanolVolume = fltEthanolVolume + 500;
    fltEthanolVolume = MthCeiling(fltEthanolVolume);
    strEthanolVolume = StrIStr(fltEthanolVolume);
    strEthanolVolume = StrConcat2(strEthanolVolume, " uL");
    //Calculate Elution Volume
    fltElutionVolume = fltElutionAdditionVolumePerSample * intNumberOfSamples;
    fltElutionVolume = fltElutionVolume + 500;
    fltElutionVolume = MthCeiling(fltElutionVolume);
    strElutionVolume = StrIStr(fltElutionVolume);
    strElutionVolume = StrConcat2(strElutionVolume, " uL");
    blnLoadTroughCarrier = ASWGLOBAL::BOOL::TRUE;
    blnLoadMIDIPlateCarrier = ASWGLOBAL::BOOL::TRUE;
  }
  if (io_arrIsSelected.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    dialogHandle_1.SetOutput(Translate("Please keep the HEPA Hood Light off when loading your Picogreen solution."), "\n", Translate(""), "\n", Translate("Press OK to Continue"));
    dialogHandle_1.ShowOutput(Translate("LIGHT SENSITIVE COMPOUND ON DECK"), hslOKOnly | hslExclamation | hslDefButton1, hslInfinite);
    arrGroupName.SetSize(0);
    arrGroupName.AddAsLast(Translate("Dilution Factor"));
    arrGroupName.AddAsLast(Translate("Dilution Factor"));
    arrLabels.SetSize(0);
    arrLabels.AddAsLast(Translate("1:100"));
    arrLabels.AddAsLast(Translate("1:400"));
    arrIsEditable.SetSize(0);
    arrIsEditable.AddAsLast(ASWGLOBAL::BOOL::TRUE);
    arrIsEditable.AddAsLast(ASWGLOBAL::BOOL::TRUE);
    intResult = AswStandardDialogs::RadioButtonDialog(Translate("16S MetagenomicLibrary Prep"), AswStandardDialogs::ButtonType::OkCancel, 0, 0, Translate("Please select dilution factor for run: "), Translate("Press 'OK' to continue, 'Cancel' to abort."), arrLabels, arrTooltips, arrIsEditable, arrQuantSelection, arrGroupName, AswStandardDialogs::RadioButtonDialog::WrapOrientation::Horizontal, AswStandardDialogs::RadioButtonDialog::SortDirection::Unsorted);
    if (intResult == 2)
    {
      abort;
    }
    if (arrQuantSelection.ElementAt( 1 -1) == 1)
    {
      strDilutionFactor = Translate("1:100");
    }
    else
    {
      strDilutionFactor = Translate("1:400");
    }
    intNumberOfMIDIPlates = intNumberOfMIDIPlates + 2;
    intNumberOf50uLTips   = intNumberOf50uLTips   + (intNumberOfSamples * 3) + 16;
    intNumberOf300uLTips  = intNumberOf300uLTips  + 16;
    //Calculate TE Buffer Volume
    if(strDilutionFactor == "1:100") {
         fltTEBufferVolume = fltTEBufferVolume + (116 * intNumberOfSamples); }
    else {
         fltTEBufferVolume = fltTEBufferVolume + (128 * intNumberOfSamples); }
    fltTEBufferVolume = fltTEBufferVolume + (fltTEBufferVolume * 0.2);
    fltTEBufferVolume = MthCeiling(fltTEBufferVolume);
    strTEBufferVolume = StrIStr(fltTEBufferVolume);
    strTEBufferVolume = StrConcat2(strTEBufferVolume, " uL");
    //Calculate Picogreen Volume
    fltPicogreenVolume = fltPicogreenVolume + (100 * intNumberOfSamples) + 100;
    fltPicogreenVolume = fltPicogreenVolume + 500;
    fltPicogreenVolume = MthCeiling(fltPicogreenVolume);
    strPicogreenVolume = StrIStr(fltPicogreenVolume);
    strPicogreenVolume = StrConcat2(strPicogreenVolume, " uL");
    blnLoadTroughCarrier = ASWGLOBAL::BOOL::TRUE;
    blnLoadMIDIPlateCarrier = ASWGLOBAL::BOOL::TRUE;
  }
  if (io_arrIsSelected.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
  {
    intNumberOf50uLTips    = intNumberOf50uLTips   +  intNumberOfSamples;
    blnLoadMIDIPlateCarrier = ASWGLOBAL::BOOL::TRUE;
  }
  if (intNumberOf50uLTips > 0)
  {
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    //50uL Tip Loading Dialog information
    strNumberOf50uLTips = StrIStr(intNumberOf50uLTips);
    strTopText = "Please load the 50uL Tip Carriers with the following:";
    strBottomText = "Make sure that the left carrier starts at Track 7.";
    strTopImageFilePath = "C:\\Program Files (x86)\\HAMILTON\\Methods\\Illumina16S_LoadingImages\\TipCarrier50LoadingDialog.png";
    strBottomImageFilePath = "";
    arrPositions.AddAsLast(Translate("Racks 1 - 10"));
    arrQuantities.AddAsLast(strNumberOf50uLTips);
    arrDescriptions.AddAsLast(Translate("Hamilton 50uL Tips w/ Filters"));
    _Loading(arrColumnHeaders, strTopText, strBottomText, strTopImageFilePath, strBottomImageFilePath, arrPositions, arrQuantities, arrDescriptions);
    PTL::ResetLoadingStateAndSequences();
    PTL::SetLoadingState("UserResponseTime", hslInfinite);
    PTL::SetLoadingState("ErrorHandling", 3);
    PTL::SetLoadingState("CalibrateCarrierChannel", -1);
    PTL::SetLoadingSize(1);
    PTL::SetLoadingSequence(0, ML_STAR.MlStar50ulTipWithFilter, 1, -10, hslTrue, hslTrue, "Tip50uLCounter");
    if( 0 == PTL::Load(ML_STAR, hslTrue) )
    {
          PTL::RaiseRuntimeError(-1556872960, PTL::IDS::smartStepLoad, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    PTL::GetLoadingSequence(0, ML_STAR.MlStar50ulTipWithFilter);
  }
  if (intNumberOf300uLTips > 0)
  {
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    //300uL Tip Loading Dialog information
    strNumberOf300uLTips = StrIStr(intNumberOf300uLTips);
    strTopText = "Please load the 300uL Tip Carriers with the following:";
    strBottomText = "Make sure that the left carrier starts at Track 19.";
    strTopImageFilePath = "C:\\Program Files (x86)\\HAMILTON\\Methods\\Illumina16S_LoadingImages\\TipCarrier300LoadingDialog.png";
    strBottomImageFilePath = "";
    arrPositions.AddAsLast(Translate("Racks 1 - 10"));
    arrQuantities.AddAsLast(strNumberOf300uLTips);
    arrDescriptions.AddAsLast(Translate("Hamilton 300uL Tips w/ Filters"));
    _Loading(arrColumnHeaders, strTopText, strBottomText, strTopImageFilePath, strBottomImageFilePath, arrPositions, arrQuantities, arrDescriptions);
    PTL::ResetLoadingStateAndSequences();
    PTL::SetLoadingState("UserResponseTime", hslInfinite);
    PTL::SetLoadingState("ErrorHandling", 3);
    PTL::SetLoadingState("CalibrateCarrierChannel", -1);
    PTL::SetLoadingSize(1);
    PTL::SetLoadingSequence(0, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 1, -10, hslTrue, hslTrue, "Tip300uLCounter");
    if( 0 == PTL::Load(ML_STAR, hslTrue) )
    {
          PTL::RaiseRuntimeError(-1556872960, PTL::IDS::smartStepLoad, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    PTL::GetLoadingSequence(0, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
  }
  if (blnLoadTroughCarrier == ASWGLOBAL::BOOL::TRUE)
  {
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    //Trough Carrier Loading Dialog information
    strTopText = "Please load the following Trough Carrier as shown:";
    strBottomText = "Make sure that the carrier is on Track 31";
    strTopImageFilePath = "C:\\Program Files (x86)\\HAMILTON\\Methods\\Illumina16S_LoadingImages\\Trough50mLCarrierLoadingDialog.png";
    strBottomImageFilePath = "";
    if (io_arrIsSelected.ElementAt( 1 -1) == 1)
    {
      {
        for(intIndex = 0; intIndex < intNumberOfReagentsInTroughs;)
        {
          intIndex = intIndex + 1;
          fltTotalVolume = 0;
          strReagentName=arrReagentsInTroughs.GetAt(intIndex-1);
          strCommandString = "SELECT [RgtName], [RgtVolume] FROM [" + strFileName + "#csv] WHERE [RgtName] = '" + strReagentName + "';";
          file1.AddField("RgtName", strRgtName, hslString, 255);
          file1.AddField("RgtVolume", fltRgtVolume, hslFloat);
          file1.SetDelimiter(hslCSVDelimited);
          if( 0 == file1.Open(strWorklistFilePath, hslRead, strCommandString) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, strWorklistFilePath, "HxMetEdCompCmd");
          }
          {
            loopCounter1 = 0;
            while (
               (file1.Eof() == 0)
            )
            {
              loopCounter1 = loopCounter1 + 1;
              if( 0 == file1.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              fltTotalVolume = fltTotalVolume + fltRgtVolume;
            }
          }
          if( 0 != file1.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          file1.RemoveFields();
          // Format Total Volume For Dialog
          fltTotalVolume = fltTotalVolume + 3000;
          fltTotalVolume = MthCeiling(fltTotalVolume);
          strTotalVolume = StrIStr(fltTotalVolume);
          strTotalVolume = StrConcat2(strTotalVolume, " uL");
          strPosition = StrIStr(intIndex);
          arrPositions.AddAsLast(strPosition);
          arrQuantities.AddAsLast(strTotalVolume);
          arrDescriptions.AddAsLast(strReagentName);
        }
      }
    }
    if (io_arrIsSelected.ElementAt( 2 -1) == 1)
    {
      arrPositions.AddAsLast(Translate("1"));
      arrQuantities.AddAsLast(strBeadVolume);
      arrDescriptions.AddAsLast(Translate("Bead Solution Tube"));
      arrPositions.AddAsLast(Translate("2"));
      arrQuantities.AddAsLast(strEthanolVolume);
      arrDescriptions.AddAsLast(Translate("Wash Buffer Trough"));
      arrPositions.AddAsLast(Translate("3"));
      arrQuantities.AddAsLast(strElutionVolume);
      arrDescriptions.AddAsLast(Translate("Resuspension Buffer Tube"));
    }
    if (io_arrIsSelected.ElementAt( 3 -1) == 1)
    {
      arrPositions.AddAsLast(Translate("1"));
      arrQuantities.AddAsLast(strPicogreenVolume);
      arrDescriptions.AddAsLast(Translate("Picogreen Solution"));
      arrPositions.AddAsLast(Translate("2"));
      arrQuantities.AddAsLast(strTEBufferVolume);
      arrDescriptions.AddAsLast(Translate("TE Buffer Trough"));
    }
    _Loading(arrColumnHeaders, strTopText, strBottomText, strTopImageFilePath, strBottomImageFilePath, arrPositions, arrQuantities, arrDescriptions);
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  }
  if (blnLoad24PositionSampleCarrier == ASWGLOBAL::BOOL::TRUE)
  {
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    //MagBeads Loading Dialog information
    strTopText = "Please load the your elution solution in the following position:";
    strBottomText = "Make sure that the carrier is on track 33.";
    strTopImageFilePath = "C:\\Program Files (x86)\\HAMILTON\\Methods\\Illumina16S_LoadingImages\\Right24PositionCarrierLoadingDialog.png";
    strBottomImageFilePath = "";
    if (io_arrIsSelected.ElementAt( 1 -1) == 1)
    {
      {
        for(intIndex = 0; intIndex < intNumberOfReagentsIn5mLTubes;)
        {
          intIndex = intIndex + 1;
          fltTotalVolume = 0;
          strReagentName=arrReagentsIn5mLTubes.GetAt(intIndex-1);
          strCommandString = "SELECT [RgtName], [RgtVolume] FROM [" + strFileName + "#csv] WHERE [RgtName] = '" + strReagentName + "';";
          file1.AddField("RgtName", strRgtName, hslString, 255);
          file1.AddField("RgtVolume", fltRgtVolume, hslFloat);
          file1.SetDelimiter(hslCSVDelimited);
          if( 0 == file1.Open(strWorklistFilePath, hslRead, strCommandString) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, strWorklistFilePath, "HxMetEdCompCmd");
          }
          {
            loopCounter1 = 0;
            while (
               (file1.Eof() == 0)
            )
            {
              loopCounter1 = loopCounter1 + 1;
              if( 0 == file1.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              fltTotalVolume = fltTotalVolume + fltRgtVolume;
            }
          }
          if( 0 != file1.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          file1.RemoveFields();
          // Format Total Volume For Dialog
          fltTotalVolume = fltTotalVolume + (fltTotalVolume * 0.2);
          fltTotalVolume = MthCeiling(fltTotalVolume);
          strTotalVolume = StrIStr(fltTotalVolume);
          strTotalVolume = StrConcat2(strTotalVolume, " uL");
          strPosition = StrIStr(intIndex);
          arrPositions.AddAsLast(strPosition);
          arrQuantities.AddAsLast(strTotalVolume);
          arrDescriptions.AddAsLast(strReagentName);
        }
      }
    }
    _Loading(arrColumnHeaders, strTopText, strBottomText, strTopImageFilePath, strBottomImageFilePath, arrPositions, arrQuantities, arrDescriptions);
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  }
  if (blnLoad32PositionSampleCarrier == ASWGLOBAL::BOOL::TRUE)
  {
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    //MagBeads Loading Dialog information
    strTopText = "Please vortex and load the your bead solution in the following position:";
    strBottomText = "Make sure that the carrier is on track 34.";
    strTopImageFilePath = "C:\\Program Files (x86)\\HAMILTON\\Methods\\Illumina16S_LoadingImages\\Left32PositionCarrierLoadingDialog.png";
    strBottomImageFilePath = "";
    if (io_arrIsSelected.ElementAt( 1 -1) == 1)
    {
      {
        for(intIndex = 0; intIndex < intNumberOfReagentsIn2mLTubes;)
        {
          intIndex = intIndex + 1;
          fltTotalVolume = 0;
          strReagentName=arrReagentsIn2mLTubes.GetAt(intIndex-1);
          strCommandString = "SELECT [RgtName], [RgtVolume] FROM [" + strFileName + "#csv] WHERE [RgtName] = '" + strReagentName + "';";
          file1.AddField("RgtName", strRgtName, hslString, 255);
          file1.AddField("RgtVolume", fltRgtVolume, hslFloat);
          file1.SetDelimiter(hslCSVDelimited);
          if( 0 == file1.Open(strWorklistFilePath, hslRead, strCommandString) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, strWorklistFilePath, "HxMetEdCompCmd");
          }
          {
            loopCounter1 = 0;
            while (
               (file1.Eof() == 0)
            )
            {
              loopCounter1 = loopCounter1 + 1;
              if( 0 == file1.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              fltTotalVolume = fltTotalVolume + fltRgtVolume;
            }
          }
          if( 0 != file1.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          file1.RemoveFields();
          // Format Total Volume For Dialog
          fltTotalVolume = fltTotalVolume + (fltTotalVolume * 0.2);
          fltTotalVolume = MthCeiling(fltTotalVolume);
          strTotalVolume = StrIStr(fltTotalVolume);
          strTotalVolume = StrConcat2(strTotalVolume, " uL");
          strPosition = StrIStr(intIndex);
          arrPositions.AddAsLast(strPosition);
          arrQuantities.AddAsLast(strTotalVolume);
          arrDescriptions.AddAsLast(strReagentName);
        }
      }
    }
    _Loading(arrColumnHeaders, strTopText, strBottomText, strTopImageFilePath, strBottomImageFilePath, arrPositions, arrQuantities, arrDescriptions);
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  }
  if (blnLoadIndexPrimerCarrier == ASWGLOBAL::BOOL::TRUE)
  {
    blnIndexPrimersLoaded = ASWGLOBAL::BOOL::FALSE;
    arrMissingIndexPrimers.SetSize(0);
    {
      loopCounter1 = 0;
      while (blnIndexPrimersLoaded == ASWGLOBAL::BOOL::FALSE)
      {
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        //Index Primers Loading Dialog information
        strTopText = "Please load the following Index Primers in any location in the tube carrier:";
        strBottomText = "Make sure that the carrier is on track 35.";
        strTopImageFilePath = "C:\\Program Files (x86)\\HAMILTON\\Methods\\Illumina16S_LoadingImages\\IndexPrimerCarrier.png";
        {
          for(intPositionCounter = 0; intPositionCounter < intTotalNumberOfIndexPrimers;)
          {
            intPositionCounter = intPositionCounter + 1;
            strPosition = StrIStr(intPositionCounter);
            strDescription = StrConcat2(Translate("Index Primer "), arrTotalIndexPrimers.ElementAt( intPositionCounter -1));
            arrPositions.AddAsLast(strPosition);
            arrQuantities.AddAsLast(Translate(" - "));
            arrDescriptions.AddAsLast(strDescription);
          }
        }
        _Loading(arrColumnHeaders, strTopText, strBottomText, strTopImageFilePath, Translate(""), arrPositions, arrQuantities, arrDescriptions);
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
        if (blnSimulationMode == ASWGLOBAL::BOOL::TRUE)
        {
          {
            for(intIndexPrimerLoopCounter1 = 0; intIndexPrimerLoopCounter1 < intTotalNumberOfIndexPrimers;)
            {
              intIndexPrimerLoopCounter1 = intIndexPrimerLoopCounter1 + 1;
              strPositionId = StrIStr(intIndexPrimerLoopCounter1);
              Util2::VarArrCheckIndex(arrTotalIndexPrimers, intIndexPrimerLoopCounter1, "arrTotalIndexPrimers");
              STCC::SetElementBarcode(ML_STAR, "CAR_RNA_Adapter_Tubes", strPositionId, arrTotalIndexPrimers.ElementAt(intIndexPrimerLoopCounter1-1));
            }
          }
        }
        seqIndexPrimers.SetSize(0);
        seqIndexPrimers.AddAsLast(ML_STAR.seqIndexPrimerCarrier);
        arrIndexPrimerCarrierElementIds = VectorDb_Labware::GetElementIDsOfSequencePositions(intDeckID, seqIndexPrimers);
        intNumberOfPrimersFound=arrIndexPrimerCarrierElementIds.GetSize();
        {
          for(intIndexPrimerLoopCounter3 = 0; intIndexPrimerLoopCounter3 < intNumberOfPrimersFound;)
          {
            intIndexPrimerLoopCounter3 = intIndexPrimerLoopCounter3 + 1;
            strBarcode = VectorDb_Labware::GetLabwareBarcodeByElementID(arrIndexPrimerCarrierElementIds.ElementAt( intIndexPrimerLoopCounter3 -1));
            if (strBarcode != "")
            {
              strBarcode = StrRight(strBarcode, 4);
              VectorDb_Labware::GetLabwareByElementID(arrIndexPrimerCarrierElementIds.ElementAt( intIndexPrimerLoopCounter3 -1), intDeckID, intParentId, strPositionId, strDummy, strDummy, strDummy, strDummy, strDummy, strDummy, strDummy, strDummy, strDummy);
              VectorDb_Labware::GetLabwareByElementID(intParentId, intDeckID, strDummy, strLabwareId, strDummy, strDummy, strDummy, strDummy, strDummy, strDummy, strDummy, strDummy, strDummy);
              STCC::SetElementBarcode(ML_STAR, strLabwareId, strPositionId, strBarcode);
            }
          }
        }
        {
          for(intIndexPrimerLoopCounter2 = 0; intIndexPrimerLoopCounter2 < intTotalNumberOfIndexPrimers;)
          {
            intIndexPrimerLoopCounter2 = intIndexPrimerLoopCounter2 + 1;
            blnPrimerLoaded = VectorDb_Labware::IsBarcodeLoaded(intDeckID, arrTotalIndexPrimers.ElementAt( intIndexPrimerLoopCounter2 -1));
            if (blnPrimerLoaded == ASWGLOBAL::BOOL::FALSE)
            {
              arrMissingIndexPrimers.AddAsLast(arrTotalIndexPrimers.ElementAt( intIndexPrimerLoopCounter2 -1));
              TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("MISSING INDEX PRIMER: "), arrTotalIndexPrimers.ElementAt( intIndexPrimerLoopCounter2 -1));
            }
          }
        }
        blnAllIndexPrimersPresent = HSLExtensions::Array::IsEmpty(arrMissingIndexPrimers);
        if (blnAllIndexPrimersPresent == ASWGLOBAL::BOOL::TRUE)
        {
          blnIndexPrimersLoaded = ASWGLOBAL::BOOL::TRUE;
        }
        else
        {
          intButtonChecked = AswStandardDialogs::ErrorDialog(Translate("NexteraXT DNA Library Prep"), AswStandardDialogs::IconType::Error, AswStandardDialogs::ButtonType::OkCancel, 0, 0, 0, Translate("One or more Index Primers barcodes are missing."), Translate("Click 'OK' to retry loading or 'Cancel' to abort."));
          if (intButtonChecked == 2)
          {
            abort;
          }
        }
      }
    }
  }
  if (blnLoadMIDIPlateCarrier == ASWGLOBAL::BOOL::TRUE)
  {
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    //PCR Plate Loading Dialog information
    strTopText = "Please load the following MIDI Plate Carrier as shown:";
    strBottomText = "Make sure that the carrier starts at Track 42.";
    strTopImageFilePath = "C:\\Program Files (x86)\\HAMILTON\\Methods\\Illumina16S_LoadingImages\\MagnetAndMIDIPlateLoadingDialog.png";
    strBottomImageFilePath = "";
    arrPositions.AddAsLast(Translate("1"));
    arrQuantities.AddAsLast(Translate("1"));
    arrDescriptions.AddAsLast(Translate("Ambion Magnetic Stand 96"));
    arrPositions.AddAsLast(Translate("2"));
    if (io_arrIsSelected.ElementAt( 2 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      arrQuantities.AddAsLast(Translate("1"));
      arrDescriptions.AddAsLast(Translate("MIDI Plate"));
    }
    else
    {
      if (io_arrIsSelected.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
      {
        arrQuantities.AddAsLast(Translate("1"));
        arrDescriptions.AddAsLast(Translate("MIDI Plate for Step 1 Dilution"));
      }
      else
      {
        if (io_arrIsSelected.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
        {
          arrQuantities.AddAsLast(Translate("1"));
          arrDescriptions.AddAsLast(Translate("Target Pool Plate"));
        }
        else
        {
          arrQuantities.AddAsLast(Translate(" - "));
          arrDescriptions.AddAsLast(Translate(" - "));
        }
      }
    }
    arrPositions.AddAsLast(Translate("3"));
    if (io_arrIsSelected.ElementAt( 3 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      arrQuantities.AddAsLast(Translate("1"));
      arrDescriptions.AddAsLast(Translate("MIDI Plate for Step 2 Dilution"));
    }
    else
    {
      if (io_arrIsSelected.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
      {
        if (intNumberOfPoolingPlates >= 4)
        {
          arrQuantities.AddAsLast(Translate("1"));
          arrDescriptions.AddAsLast(Translate("DNA Source Plate"));
        }
        else
        {
          arrQuantities.AddAsLast(Translate(" - "));
          arrDescriptions.AddAsLast(Translate(" - "));
        }
      }
      else
      {
        arrQuantities.AddAsLast(Translate(" - "));
        arrDescriptions.AddAsLast(Translate(" - "));
      }
    }
    arrPositions.AddAsLast(Translate("4"));
    if (io_arrIsSelected.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
    {
      if (intNumberOfPoolingPlates >= 5)
      {
        arrQuantities.AddAsLast(Translate("1"));
        arrDescriptions.AddAsLast(Translate("DNA Source Plate"));
      }
      else
      {
        arrQuantities.AddAsLast(Translate(" - "));
        arrDescriptions.AddAsLast(Translate(" - "));
      }
    }
    else
    {
      arrQuantities.AddAsLast(Translate(" - "));
      arrDescriptions.AddAsLast(Translate(" - "));
    }
    if (io_arrIsSelected.ElementAt( 1 -1) == 1)
    {
      {
        for(intIndex = 0; intIndex < intNumberOfReagentsInStripWells;)
        {
          intIndex = intIndex + 1;
          strBottomImageFilePath = Translate("C:\\Program Files (x86)\\HAMILTON\\Methods\\Illumina16S_LoadingImages\\96WellPlate.png");
          fltTotalVolume = 0;
          strReagentName=arrReagentsInStripWells.GetAt(intIndex-1);
          strCommandString = "SELECT [RgtName], [RgtVolume] FROM [" + strFileName + "#csv] WHERE [RgtName] = '" + strReagentName + "';";
          file1.AddField("RgtName", strRgtName, hslString, 255);
          file1.AddField("RgtVolume", fltRgtVolume, hslFloat);
          file1.SetDelimiter(hslCSVDelimited);
          if( 0 == file1.Open(strWorklistFilePath, hslRead, strCommandString) )
          {
                MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, strWorklistFilePath, "HxMetEdCompCmd");
          }
          {
            loopCounter1 = 0;
            while (
               (file1.Eof() == 0)
            )
            {
              loopCounter1 = loopCounter1 + 1;
              if( 0 == file1.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              fltTotalVolume = fltTotalVolume + fltRgtVolume;
            }
          }
          if( 0 != file1.Close() )
          {
                MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          file1.RemoveFields();
          // Format Total Volume For Dialog
          fltTotalVolume = (fltTotalVolume + (fltTotalVolume * 0.2)) / 8;
          fltTotalVolume = MthCeiling(fltTotalVolume);
          strTotalVolume = StrIStr(fltTotalVolume);
          strTotalVolume = StrConcat2(strTotalVolume, " uL per well");
          strPosition = StrConcat2("5.", intIndex);
          arrPositions.AddAsLast(strPosition);
          arrQuantities.AddAsLast(strTotalVolume);
          arrDescriptions.AddAsLast(strReagentName);
        }
      }
    }
    else
    {
      arrPositions.AddAsLast(Translate("5"));
      if (io_arrIsSelected.ElementAt( 4 -1) == ASWGLOBAL::BOOL::TRUE)
      {
        if (intNumberOfPoolingPlates == 6)
        {
          arrQuantities.AddAsLast(Translate("1"));
          arrDescriptions.AddAsLast(Translate("DNA Source Plate"));
        }
        else
        {
          arrQuantities.AddAsLast(Translate(" - "));
          arrDescriptions.AddAsLast(Translate(" - "));
        }
      }
      else
      {
        arrQuantities.AddAsLast(Translate(" - "));
        arrDescriptions.AddAsLast(Translate(" - "));
      }
    }
    _Loading(arrColumnHeaders, strTopText, strBottomText, strTopImageFilePath, strBottomImageFilePath, arrPositions, arrQuantities, arrDescriptions);
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  }
}

private function PCR_CleanUp( variable fltAMPureBeadVolume, variable fltAMPureBeadMixVolume, variable fltEthanolVolume, variable fltElutionVolume, variable fltEluateTransferVolume, variable fltTotalTemplateAndBeadVolume ) void {
  private variable Off_Magnet_Incubation_Timer;
  private variable intEthanolWashCounter;
  private variable Dry_Down_Timer;
  private variable Elution_Incubation_Timer;
  private variable loopCounter2;
  private variable On_Magnet_Bead_Incubation_Timer;
  private variable Wash_Incubation_Timer;
  private variable strDescription;
  private variable strBottomImageFilePath;
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  //PCR Plate Loading Dialog information
  strTopText = "Please load the following HSP Plate Carrier as shown:";
  strBottomText = "Make sure that the carrier starts at Track 36.";
  strTopImageFilePath = "C:\\Program Files (x86)\\HAMILTON\\Methods\\Illumina16S_LoadingImages\\Tip1000uLAndHSPCarrierLoadDialog.png";
  strBottomImageFilePath = "";
  {
    for(intHSPCarrierLoopCounter = 0; intHSPCarrierLoopCounter < 5;)
    {
      intHSPCarrierLoopCounter = intHSPCarrierLoopCounter + 1;
      strPosition = StrIStr(intHSPCarrierLoopCounter);
      arrPositions.AddAsLast(strPosition);
      if (intHSPCarrierLoopCounter <= 2)
      {
        arrQuantities.AddAsLast(Translate("-"));
        arrDescriptions.AddAsLast(Translate("-"));
      }
      if (intHSPCarrierLoopCounter == 3)
      {
        arrQuantities.AddAsLast(Translate("1 HSP"));
        arrDescriptions.AddAsLast(Translate("Amplicon Plate"));
      }
      if (intHSPCarrierLoopCounter == 4)
      {
        arrQuantities.AddAsLast(Translate("-"));
        arrDescriptions.AddAsLast(Translate("-"));
      }
      if (intHSPCarrierLoopCounter == 5)
      {
        arrQuantities.AddAsLast(Translate("1"));
        arrDescriptions.AddAsLast(Translate("Clean PCR Plate"));
      }
    }
  }
  _Loading(arrColumnHeaders, strTopText, strBottomText, strTopImageFilePath, strBottomImageFilePath, arrPositions, arrQuantities, arrDescriptions);
  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  strDescription = StrConcat4(Translate("Adding "), fltAMPureBeadVolume, Translate(" uL beads to Amplicon Plate"), Translate(""));
  STEPTRACKER::START_Activity(Translate("Bead Addition"), strDescription, 19, 1);
  {
    loopCounter2 = 0;
    while (
       (ML_STAR.HSP_Pipette.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.HSP_Pipette, 1, ML_STAR.MIDI_Pipette, 1, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 1, ML_STAR.seqAmpureBeads, 1);
      loopCounter2 = loopCounter2 + 1;
      {
        	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
      }
      {
        	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
      }
      {
        	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
      }
      {
        	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
      }
      if (
         (ML_STAR.HSP_Pipette.GetCurrentPosition() > 0 && ML_STAR.HSP_Pipette.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.HSP_Pipette.SetMax(ML_STAR.HSP_Pipette.GetTotal());
    ML_STAR.MIDI_Pipette.SetMax(ML_STAR.MIDI_Pipette.GetTotal());
    ML_STAR.MlStar300ulStandardVolumeTipWithFilter.SetMax(ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetTotal());
    ML_STAR.seqAmpureBeads.SetMax(ML_STAR.seqAmpureBeads.GetTotal());
    ML_STAR.HSP_Pipette.SetCurrentPosition(1);
    ML_STAR.MIDI_Pipette.SetCurrentPosition(1);
    ML_STAR.seqAmpureBeads.SetCurrentPosition(1);
  }
  STEPTRACKER::TERMINATE_Activity();
  MECC::TraceComment(Translate("Incubate Processing Plate off Magnetic Stand"));
  STEPTRACKER::START_Timer(Off_Magnet_Incubation_Timer, Translate("Incubating @ Room Temp"), Translate("Allowing beads time to bind to DNA"), 0, 5, 0, 1, 0, 6, 1, Translate("Incubation Timer"));
  STEPTRACKER::WAIT_For_Timer(Off_Magnet_Incubation_Timer);
  MECC::TraceComment(Translate("Place Amplicon Plate on Magnetic Stand"));
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  STEPTRACKER::START_Timer(On_Magnet_Bead_Incubation_Timer, Translate("Incubating @ Room Temp on Magnet"), Translate("Clearing Supernatant"), 0, 2, 0, 1, 0, 5, 1, Translate("Incubation Timer"));
  STEPTRACKER::WAIT_For_Timer(On_Magnet_Bead_Incubation_Timer);
  MECC::TraceComment(Translate("Discarding Supernatant"));
  STEPTRACKER::START_Activity(Translate("Discarding Supernatant"), Translate("Removing Waste After Bead Addition"), 13, 1);
  {
    loopCounter2 = 0;
    while (
       (ML_STAR.MIDI_OnMagnet.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.LiquidWaste, 1, ML_STAR.MIDI_OnMagnet, 1, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 1);
      loopCounter2 = loopCounter2 + 1;
      {
        	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
      }
      {
        	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
      }
      if (
         (ML_STAR.MIDI_OnMagnet.GetCurrentPosition() > 0 && ML_STAR.MIDI_OnMagnet.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.LiquidWaste.SetMax(ML_STAR.LiquidWaste.GetTotal());
    ML_STAR.MIDI_OnMagnet.SetMax(ML_STAR.MIDI_OnMagnet.GetTotal());
    ML_STAR.MlStar300ulStandardVolumeTipWithFilter.SetMax(ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetTotal());
    ML_STAR.LiquidWaste.SetCurrentPosition(1);
    ML_STAR.MIDI_OnMagnet.SetCurrentPosition(1);
  }
  STEPTRACKER::TERMINATE_Activity();
  {
    for(intEthanolWashCounter = 0; intEthanolWashCounter < 2;)
    {
      intEthanolWashCounter = intEthanolWashCounter + 1;
      strDescription = StrConcat4(Translate("Adding "), fltEthanolVolume, Translate(" uL of Wash Buffer to Processing Plate"), Translate(""));
      STEPTRACKER::START_Activity(Translate("Washing Beads"), strDescription, 16, 1);
      MECC::TraceComment(Translate("Washing Processing Plate with Wash Buffer"));
      {
        loopCounter2 = 0;
        while (
           (ML_STAR.MIDI_OnMagnet.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 1, ML_STAR.seqEthanol, 1, ML_STAR.MIDI_OnMagnet, 1);
          loopCounter2 = loopCounter2 + 1;
          {
            	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
          }
          {
            	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
          }
          if (
             (ML_STAR.MIDI_OnMagnet.GetCurrentPosition() > 0 && ML_STAR.MIDI_OnMagnet.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.MlStar300ulStandardVolumeTipWithFilter.SetMax(ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetTotal());
        ML_STAR.seqEthanol.SetMax(ML_STAR.seqEthanol.GetTotal());
        ML_STAR.MIDI_OnMagnet.SetMax(ML_STAR.MIDI_OnMagnet.GetTotal());
        ML_STAR.seqEthanol.SetCurrentPosition(1);
        ML_STAR.MIDI_OnMagnet.SetCurrentPosition(1);
      }
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      STEPTRACKER::TERMINATE_Activity();
      MECC::TraceComment(Translate("Perform quick resuspension on HHS"));
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      HSLHamHeaterShaker::StartShakerTimed(HHS_MIDI, 1500, 30);
      HSLHamHeaterShaker::WaitForShaker(HHS_MIDI);
      HSLHamHeaterShaker::StopShaker(HHS_MIDI);
      HSLHamHeaterShaker::StartShakerTimed(HHS_MIDI, 1200, 10);
      HSLHamHeaterShaker::WaitForShaker(HHS_MIDI);
      HSLHamHeaterShaker::StopShaker(HHS_MIDI);
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      MECC::TraceComment(Translate("Incubate Processing Plate on Magnetic Stand"));
      STEPTRACKER::START_Timer(Wash_Incubation_Timer, Translate("Incubating @ Room Temp on Magnet"), Translate("Clearing Supernatant"), 0, 2, 0, 1, 0, 5, 1, Translate("Incubation Timer"));
      STEPTRACKER::WAIT_For_Timer(Wash_Incubation_Timer);
      MECC::TraceComment(Translate("Removing Supernatant"));
      STEPTRACKER::START_Activity(Translate("Discarding Supernatant"), Translate("Removing Waste After Wash Buffer Addition"), 13, 1);
      {
        loopCounter2 = 0;
        while (
           (ML_STAR.MIDI_OnMagnet.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.LiquidWaste, 1, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 1, ML_STAR.MIDI_OnMagnet, 1);
          loopCounter2 = loopCounter2 + 1;
          {
            	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
          }
          {
            	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
          }
          if (
             (ML_STAR.MIDI_OnMagnet.GetCurrentPosition() > 0 && ML_STAR.MIDI_OnMagnet.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.LiquidWaste.SetMax(ML_STAR.LiquidWaste.GetTotal());
        ML_STAR.MlStar300ulStandardVolumeTipWithFilter.SetMax(ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetTotal());
        ML_STAR.MIDI_OnMagnet.SetMax(ML_STAR.MIDI_OnMagnet.GetTotal());
        ML_STAR.LiquidWaste.SetCurrentPosition(1);
        ML_STAR.MIDI_OnMagnet.SetCurrentPosition(1);
      }
      STEPTRACKER::TERMINATE_Activity();
    }
  }
  MECC::TraceComment(Translate("Dry Down Processing Plate"));
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  HSLHamHeaterShaker::StartShaker(HHS_MIDI, 1200);
  STEPTRACKER::START_Timer(Dry_Down_Timer, Translate("Evaporating Any Ethanol Remaining"), Translate("Drying Down Processing Plate"), 0, 5, 0, 1, 0, 0, 1, Translate("Drying Down Timer"));
  STEPTRACKER::WAIT_For_Timer(Dry_Down_Timer);
  HSLHamHeaterShaker::StopShaker(HHS_MIDI);
  MECC::TraceComment(Translate("Adding Elution Buffer to Processing Plate"));
  strDescription = StrConcat4(Translate("Adding "), fltElutionVolume, Translate(" uL of Elution Buffer to Processing Plate"), Translate(""));
  STEPTRACKER::START_Activity(Translate("Elution Buffer Addition"), strDescription, 19, 1);
  {
    loopCounter2 = 0;
    while (
       (ML_STAR.MIDI_HHS1.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.MIDI_HHS1, 1, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 1, ML_STAR.seqElutionBuffer, 1);
      loopCounter2 = loopCounter2 + 1;
      {
        	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
      }
      {
        	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
      }
      if (
         (ML_STAR.MIDI_HHS1.GetCurrentPosition() > 0 && ML_STAR.MIDI_HHS1.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.MIDI_HHS1.SetMax(ML_STAR.MIDI_HHS1.GetTotal());
    ML_STAR.MlStar300ulStandardVolumeTipWithFilter.SetMax(ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetTotal());
    ML_STAR.seqElutionBuffer.SetMax(ML_STAR.seqElutionBuffer.GetTotal());
    ML_STAR.MIDI_HHS1.SetCurrentPosition(1);
    ML_STAR.seqElutionBuffer.SetCurrentPosition(1);
  }
  STEPTRACKER::TERMINATE_Activity();
  MECC::TraceComment(Translate("Incubate Processing Plate off Magnetic Stand"));
  HSLHamHeaterShaker::StartShaker(HHS_MIDI, 1500);
  STEPTRACKER::START_Timer(Elution_Incubation_Timer, Translate("Incubating @ Room Temp"), Translate("Quick vortex to resuspend beads"), 0, 0, 10, 1, 0, 6, 1, Translate("Incubation Timer"));
  STEPTRACKER::WAIT_For_Timer(Elution_Incubation_Timer);
  HSLHamHeaterShaker::StopShaker(HHS_MIDI);
  HSLHamHeaterShaker::StartShaker(HHS_MIDI, 1100);
  STEPTRACKER::START_Timer(Elution_Incubation_Timer, Translate("Incubating @ Room Temp"), Translate("Allowing DNA To Detach From Beads"), 0, 2, 0, 1, 0, 6, 1, Translate("Incubation Timer"));
  STEPTRACKER::WAIT_For_Timer(Elution_Incubation_Timer);
  MECC::TraceComment(Translate("Incubate Processing Plate on Magnetic Stand"));
  HSLHamHeaterShaker::StopShaker(HHS_MIDI);
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  STEPTRACKER::START_Timer(Elution_Incubation_Timer, Translate("Incubating @ Room Temp On Magnet"), Translate("Separating Beads From Free DNA"), 0, 2, 0, 1, 0, 5, 1, Translate("Incubation Timer"));
  STEPTRACKER::WAIT_For_Timer(Elution_Incubation_Timer);
  MECC::TraceComment(Translate("Transfer Supernatant to Elution Plate"));
  strDescription = StrConcat4(Translate("Transferring "), fltEluateTransferVolume, Translate(" uL of Clean DNA to Elution Plate"), Translate(""));
  STEPTRACKER::START_Activity(Translate("Transfer Clean DNA"), strDescription, 22, 1);
  {
    loopCounter2 = 0;
    while (
       (ML_STAR.HSP_Pipette3.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.HSP_Pipette3, 1, ML_STAR.MlStar50ulTipWithFilter, 1, ML_STAR.MIDI_OnMagnet, 1);
      loopCounter2 = loopCounter2 + 1;
      {
        	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
      }
      {
        	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
      }
      if (
         (ML_STAR.HSP_Pipette3.GetCurrentPosition() > 0 && ML_STAR.HSP_Pipette3.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.HSP_Pipette3.SetMax(ML_STAR.HSP_Pipette3.GetTotal());
    ML_STAR.MlStar50ulTipWithFilter.SetMax(ML_STAR.MlStar50ulTipWithFilter.GetTotal());
    ML_STAR.MIDI_OnMagnet.SetMax(ML_STAR.MIDI_OnMagnet.GetTotal());
    ML_STAR.HSP_Pipette3.SetCurrentPosition(1);
    ML_STAR.MIDI_OnMagnet.SetCurrentPosition(1);
  }
  STEPTRACKER::TERMINATE_Activity();
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  MECC::TraceComment(Translate("Clean Up Completed"));
}

private function Pooling(  ) void {
  private variable strBottomImageFilePath;
  private variable strBarcode;
  private variable loopCounter3;
  private variable intIndex;
  private variable intPoolingPlateIndex;
  private variable intTipsUsed;
  private sequence Pooling_Target;
  private sequence Pooling_Source;
  private variable Pooling_Volume[];
  private variable strLabwareId;
  private variable strDescription;
  {
    variable _SourceColumnNamesArray_2[];
    variable _SourceColumnTypesArray_2[];
    variable _TargetColumnNamesArray_2[];
    _SourceColumnNamesArray_2.SetSize(5);
    _SourceColumnTypesArray_2.SetSize(5);
    _TargetColumnNamesArray_2.SetSize(5);
    _SourceColumnNamesArray_2.SetAt(0, "SourceBC");
    _SourceColumnTypesArray_2.SetAt(0, 0);
    _TargetColumnNamesArray_2.SetAt(0, "SourceBarcode");
    _SourceColumnNamesArray_2.SetAt(1, "SourceWell");
    _SourceColumnTypesArray_2.SetAt(1, 0);
    _TargetColumnNamesArray_2.SetAt(1, "SourcePositionId");
    _SourceColumnNamesArray_2.SetAt(2, "TargetBC");
    _SourceColumnTypesArray_2.SetAt(2, 0);
    _TargetColumnNamesArray_2.SetAt(2, "TargetBarcode");
    _SourceColumnNamesArray_2.SetAt(3, "TargetWell");
    _SourceColumnTypesArray_2.SetAt(3, 0);
    _TargetColumnNamesArray_2.SetAt(3, "TargetPositionId");
    _SourceColumnNamesArray_2.SetAt(4, "Volume");
    _SourceColumnTypesArray_2.SetAt(4, 0);
    _TargetColumnNamesArray_2.SetAt(4, "TargetVolume");
    ImportWorklist::ImportTxtWorklist(strPoolingWorklistFilePath, "", "", hslCSVDelimited, "\"", 1, 1, 0, 0, _SourceColumnNamesArray_2, _SourceColumnTypesArray_2, _TargetColumnNamesArray_2 );
  }
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  //PCR Plate Loading Dialog information
  strTopText = "Please load the following HSP Plate Carrier as shown:";
  strBottomText = "Make sure that the carrier starts at Track 36.";
  strTopImageFilePath = "C:\\Program Files (x86)\\HAMILTON\\Methods\\Illumina16S_LoadingImages\\Tip1000uLAndHSPCarrierLoadDialog.png";
  strBottomImageFilePath = "";
  arrPositions.AddAsLast(Translate("1"));
  arrPositions.AddAsLast(Translate("2"));
  arrPositions.AddAsLast(Translate("3"));
  arrPositions.AddAsLast(Translate("4"));
  arrPositions.AddAsLast(Translate("5"));
  arrQuantities.AddAsLast(Translate(" - "));
  arrQuantities.AddAsLast(Translate(" - "));
  arrDescriptions.AddAsLast(Translate("-"));
  arrDescriptions.AddAsLast(Translate("-"));
  if (intNumberOfPoolingPlates >= 1)
  {
    arrQuantities.AddAsLast(Translate("1"));
    arrDescriptions.AddAsLast(Translate("DNA Source Plate"));
  }
  if (intNumberOfPoolingPlates >= 2)
  {
    arrQuantities.AddAsLast(Translate("1"));
    arrDescriptions.AddAsLast(Translate("DNA Source Plate"));
  }
  else
  {
    arrQuantities.AddAsLast(Translate(" - "));
    arrDescriptions.AddAsLast(Translate("-"));
  }
  if (intNumberOfPoolingPlates >= 3)
  {
    arrQuantities.AddAsLast(Translate("1"));
    arrDescriptions.AddAsLast(Translate("DNA Source Plate"));
  }
  else
  {
    arrQuantities.AddAsLast(Translate(" - "));
    arrDescriptions.AddAsLast(Translate("-"));
  }
  _Loading(arrColumnHeaders, strTopText, strBottomText, strTopImageFilePath, strBottomImageFilePath, arrPositions, arrQuantities, arrDescriptions);
  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  {
    loopCounter3 = 0;
    while (
       (ML_STAR.seqPoolingPlates.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.seqPoolingPlates, 1);
      loopCounter3 = loopCounter3 + 1;
      onerror goto errLabel_3 ;
      err.Clear();
      {
        	strBarcode = ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      strLabwareId = SeqGetLabwareId(ML_STAR.seqPoolingPlates);
      VectorDb_Labware::LoadLabware(ML_STAR, strLabwareId, Translate(""));
      STCC::SetElementBarcodeForSequencePos(ML_STAR, ML_STAR.seqPoolingPlates, -1, hslTrue, strBarcode);
      SeqIncrement(ML_STAR.seqPoolingPlates, 96);
      errLabel_3 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        break;
      }   /* end if from skip handler if no error */
      if (
         (ML_STAR.seqPoolingPlates.GetCurrentPosition() > 0 && ML_STAR.seqPoolingPlates.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.seqPoolingPlates.SetMax(ML_STAR.seqPoolingPlates.GetTotal());
    ML_STAR.seqPoolingPlates.SetCurrentPosition(1);
  }
  VectorDb_Labware::LoadLabware(ML_STAR, Translate("PoolingPlate"), Translate(""));
  STCC::SetElementBarcodeForSequencePos(ML_STAR, ML_STAR.PoolingPlate, -1, hslTrue, "TargetPlate");
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  {
    variable _SortColumnArray_4[];
    variable _SortCriterionArray_4[];
    variable _SortDirectionArray_4[];
    sequence _DummyInputSequence_4;
    variable _DummyJobName_4;
    _DummyJobName_4="";
    PTL::ResetLoadingStateAndSequences();
    PTL::SetLoadingState("UserResponseTime", hslInfinite);
    PTL::SetLoadingState("ErrorHandling", 3);
    PTL::SetLoadingSize(1);
    PTL::SetLoadingSequence(0, _DummyInputSequence_4, 1, -10, hslTrue, hslFalse, "");
    if( 0 == PTL::Load2(ML_STAR, hslFalse, hslFalse, hslFalse) )
    {
          PTL::RaiseRuntimeError(-1422655232, PTL::IDS::smartStepLoadAndMatch, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    _SortColumnArray_4.SetSize(4);
    _SortCriterionArray_4.SetSize(4);
    _SortDirectionArray_4.SetSize(4);
    _SortColumnArray_4.SetAt(0,"__SourceSequence__");
    _SortColumnArray_4.SetAt(1,"__SourceSequence__");
    _SortColumnArray_4.SetAt(2,"__SourceSequence__");
    _SortColumnArray_4.SetAt(3,"__SourceSequence__");
    _SortCriterionArray_4.SetAt(0,4);
    _SortCriterionArray_4.SetAt(1,5);
    _SortCriterionArray_4.SetAt(2,7);
    _SortCriterionArray_4.SetAt(3,8);
    _SortDirectionArray_4.SetAt(0,1);
    _SortDirectionArray_4.SetAt(1,1);
    _SortDirectionArray_4.SetAt(2,1);
    _SortDirectionArray_4.SetAt(3,2);
    MatchWorklist::MatchJobData(ML_STAR, _DummyJobName_4, hslTrue, Pooling_Source, hslTrue, Pooling_Target, hslTrue, Pooling_Volume, _SortColumnArray_4, _SortCriterionArray_4, _SortDirectionArray_4);
  }
  TRACELEVEL::Release_TraceSequence(Pooling_Source);
  TRACELEVEL::Release_TraceSequence(Pooling_Target);
  intIndex = 1;
  STEPTRACKER::START_Activity(Translate("Pooling Samples"), strDescription, 22, 1);
  {
    intPoolingPlateIndex = 0;
    Pooling_Source.SetCurrentPosition(1);
    Pooling_Target.SetCurrentPosition(1);
    while (
       (Pooling_Target.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Pooling_Source, 1, Pooling_Target, 1);
      intPoolingPlateIndex = intPoolingPlateIndex + 1;
      {
        	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
      }
      {
        	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
      }
      intTipsUsed = SeqGetUsedPositions(ML_STAR.MlStar50ulTipWithFilter);
      intIndex = intIndex + intTipsUsed;
      if (
         (Pooling_Target.GetCurrentPosition() > 0 && Pooling_Target.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Pooling_Source.SetMax(Pooling_Source.GetTotal());
    Pooling_Target.SetMax(Pooling_Target.GetTotal());
  }
  STEPTRACKER::TERMINATE_Activity();
}

private function Quantification( variable i_intDilutionSetup ) void {
  private variable Shaker_Timer;
  private variable intTEBufferLoopCounter;
  private variable loopCounter2;
  private variable strBottomImageFilePath;
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  //PCR Plate Loading Dialog information
  strTopText = "Please load the following HSP Plate Carrier as shown:";
  strBottomText = "Make sure that the carrier starts at Track 36.";
  strTopImageFilePath = "C:\\Program Files (x86)\\HAMILTON\\Methods\\Illumina16S_LoadingImages\\Tip1000uLAndHSPCarrierLoadDialog.png";
  strBottomImageFilePath = "";
  {
    for(intHSPCarrierLoopCounter = 0; intHSPCarrierLoopCounter < 5;)
    {
      intHSPCarrierLoopCounter = intHSPCarrierLoopCounter + 1;
      strPosition = StrIStr(intHSPCarrierLoopCounter);
      arrPositions.AddAsLast(strPosition);
      if (intHSPCarrierLoopCounter <= 2)
      {
        arrQuantities.AddAsLast(Translate("-"));
        arrDescriptions.AddAsLast(Translate("-"));
      }
      if (intHSPCarrierLoopCounter == 3)
      {
        arrQuantities.AddAsLast(Translate("1 HSP"));
        arrDescriptions.AddAsLast(Translate("Genomic DNA Plate"));
      }
    }
  }
  arrQuantities.AddAsLast(Translate("1 HSP"));
  arrDescriptions.AddAsLast(Translate("Standard Curve in Column 1"));
  arrQuantities.AddAsLast(Translate("1 MTP"));
  arrDescriptions.AddAsLast(Translate("Black 384 Well Plate"));
  _Loading(arrColumnHeaders, strTopText, strBottomText, strTopImageFilePath, strBottomImageFilePath, arrPositions, arrQuantities, arrDescriptions);
  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  ML_STAR.seqQuantPlate1_SamplesReplicate1.SetCount(intNumberOfSamples);
  ML_STAR.seqQuantPlate1_SamplesReplicate2.SetCount(intNumberOfSamples);
  ML_STAR.seqQuantPlate1_SamplesReplicate3.SetCount(intNumberOfSamples);
  if (i_intDilutionSetup == "1:100")
  {
    MECC::TraceComment(Translate("Add 36uL of TEBuffer to Dilution Plate"));
    STEPTRACKER::START_Activity(Translate("TE Buffer Addition"), Translate("Adding 36uL of TE Buffer to MIDI Dilution Plate 1"), 19, 1);
    {
      intTEBufferLoopCounter = 0;
      while (
         (ML_STAR.MIDI_HHS1.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MIDI_HHS1, 1, ML_STAR.seqTEBuffer, 1, ML_STAR.MlStar50ulTipWithFilter, 1);
        intTEBufferLoopCounter = intTEBufferLoopCounter + 1;
        if (intTEBufferLoopCounter == 1)
        {
          {
            	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
          }
        }
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        if (
           (ML_STAR.MIDI_HHS1.GetCurrentPosition() > 0 && ML_STAR.MIDI_HHS1.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MIDI_HHS1.SetMax(ML_STAR.MIDI_HHS1.GetTotal());
      ML_STAR.seqTEBuffer.SetMax(ML_STAR.seqTEBuffer.GetTotal());
      ML_STAR.MlStar50ulTipWithFilter.SetMax(ML_STAR.MlStar50ulTipWithFilter.GetTotal());
      ML_STAR.MIDI_HHS1.SetCurrentPosition(1);
      ML_STAR.seqTEBuffer.SetCurrentPosition(1);
    }
  }
  else
  {
    MECC::TraceComment(Translate("Add 38uL of TEBuffer to Dilution Plate"));
    STEPTRACKER::START_Activity(Translate("TE Buffer Addition"), Translate("Adding 38uL of TE Buffer to MIDI Dilution Plate 1"), 19, 1);
    {
      intTEBufferLoopCounter = 0;
      while (
         (ML_STAR.MIDI_HHS1.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MIDI_HHS1, 1, ML_STAR.seqTEBuffer, 1, ML_STAR.MlStar50ulTipWithFilter, 1);
        intTEBufferLoopCounter = intTEBufferLoopCounter + 1;
        if (intTEBufferLoopCounter == 1)
        {
          {
            	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
          }
        }
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        if (
           (ML_STAR.MIDI_HHS1.GetCurrentPosition() > 0 && ML_STAR.MIDI_HHS1.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MIDI_HHS1.SetMax(ML_STAR.MIDI_HHS1.GetTotal());
      ML_STAR.seqTEBuffer.SetMax(ML_STAR.seqTEBuffer.GetTotal());
      ML_STAR.MlStar50ulTipWithFilter.SetMax(ML_STAR.MlStar50ulTipWithFilter.GetTotal());
      ML_STAR.MIDI_HHS1.SetCurrentPosition(1);
      ML_STAR.seqTEBuffer.SetCurrentPosition(1);
    }
  }
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  STEPTRACKER::TERMINATE_Activity();
  if (i_intDilutionSetup == "1:100")
  {
    MECC::TraceComment(Translate("Add 80uL of TEBuffer to Dilution Plate"));
    STEPTRACKER::START_Activity(Translate("TE Buffer Addition"), Translate("Adding 80uL of TE Buffer to MIDI Dilution Plate 2"), 19, 1);
    {
      intTEBufferLoopCounter = 0;
      while (
         (ML_STAR.MIDI_Pipette2.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 1, ML_STAR.seqTEBuffer, 1, ML_STAR.MIDI_Pipette2, 1);
        intTEBufferLoopCounter = intTEBufferLoopCounter + 1;
        if (intTEBufferLoopCounter == 1)
        {
          {
            	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
          }
        }
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        if (
           (ML_STAR.MIDI_Pipette2.GetCurrentPosition() > 0 && ML_STAR.MIDI_Pipette2.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar300ulStandardVolumeTipWithFilter.SetMax(ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetTotal());
      ML_STAR.seqTEBuffer.SetMax(ML_STAR.seqTEBuffer.GetTotal());
      ML_STAR.MIDI_Pipette2.SetMax(ML_STAR.MIDI_Pipette2.GetTotal());
      ML_STAR.seqTEBuffer.SetCurrentPosition(1);
      ML_STAR.MIDI_Pipette2.SetCurrentPosition(1);
    }
  }
  else
  {
    MECC::TraceComment(Translate("Add 90uL of TEBuffer to Dilution Plate"));
    STEPTRACKER::START_Activity(Translate("TE Buffer Addition"), Translate("Adding 90uL of TE Buffer to MIDI Dilution Plate 2"), 19, 1);
    {
      intTEBufferLoopCounter = 0;
      while (
         (ML_STAR.MIDI_Pipette2.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 1, ML_STAR.seqTEBuffer, 1, ML_STAR.MIDI_Pipette2, 1);
        intTEBufferLoopCounter = intTEBufferLoopCounter + 1;
        if (intTEBufferLoopCounter == 1)
        {
          {
            	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
          }
        }
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        if (
           (ML_STAR.MIDI_Pipette2.GetCurrentPosition() > 0 && ML_STAR.MIDI_Pipette2.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar300ulStandardVolumeTipWithFilter.SetMax(ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetTotal());
      ML_STAR.seqTEBuffer.SetMax(ML_STAR.seqTEBuffer.GetTotal());
      ML_STAR.MIDI_Pipette2.SetMax(ML_STAR.MIDI_Pipette2.GetTotal());
      ML_STAR.seqTEBuffer.SetCurrentPosition(1);
      ML_STAR.MIDI_Pipette2.SetCurrentPosition(1);
    }
  }
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  STEPTRACKER::TERMINATE_Activity();
  if (i_intDilutionSetup == "1:100")
  {
    MECC::TraceComment(Translate("Add 4uL of Sample to Dilution Plate 1"));
    STEPTRACKER::START_Activity(Translate("Sample Addition"), Translate("Adding 4uL of Sample to MIDI Dilution Plate 1"), 22, 1);
    {
      loopCounter2 = 0;
      while (
         (ML_STAR.MIDI_HHS1.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.HSP_Pipette, 1, ML_STAR.MIDI_HHS1, 1, ML_STAR.MlStar50ulTipWithFilter, 1);
        loopCounter2 = loopCounter2 + 1;
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        if (
           (ML_STAR.MIDI_HHS1.GetCurrentPosition() > 0 && ML_STAR.MIDI_HHS1.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.HSP_Pipette.SetMax(ML_STAR.HSP_Pipette.GetTotal());
      ML_STAR.MIDI_HHS1.SetMax(ML_STAR.MIDI_HHS1.GetTotal());
      ML_STAR.MlStar50ulTipWithFilter.SetMax(ML_STAR.MlStar50ulTipWithFilter.GetTotal());
      ML_STAR.HSP_Pipette.SetCurrentPosition(1);
      ML_STAR.MIDI_HHS1.SetCurrentPosition(1);
    }
  }
  else
  {
    MECC::TraceComment(Translate("Add 2uL of Sample to Dilution Plate 1"));
    STEPTRACKER::START_Activity(Translate("Sample Addition"), Translate("Adding 2uL of Sample to MIDI Dilution Plate 1"), 22, 1);
    {
      loopCounter2 = 0;
      while (
         (ML_STAR.MIDI_HHS1.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.HSP_Pipette, 1, ML_STAR.MIDI_HHS1, 1, ML_STAR.MlStar50ulTipWithFilter, 1);
        loopCounter2 = loopCounter2 + 1;
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        if (
           (ML_STAR.MIDI_HHS1.GetCurrentPosition() > 0 && ML_STAR.MIDI_HHS1.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.HSP_Pipette.SetMax(ML_STAR.HSP_Pipette.GetTotal());
      ML_STAR.MIDI_HHS1.SetMax(ML_STAR.MIDI_HHS1.GetTotal());
      ML_STAR.MlStar50ulTipWithFilter.SetMax(ML_STAR.MlStar50ulTipWithFilter.GetTotal());
      ML_STAR.HSP_Pipette.SetCurrentPosition(1);
      ML_STAR.MIDI_HHS1.SetCurrentPosition(1);
    }
  }
  STEPTRACKER::TERMINATE_Activity();
  MECC::TraceComment(Translate("Vortex Dilution Plate 1 on HHS @ 1000RPM for 20 seconds"));
  STEPTRACKER::START_Activity(Translate("Vortexing Diluted Sample Plate"), Translate("Mixing Dilution Plate 1"), 1, 1);
  HSLHamHeaterShaker::StartShakerTimed(HHS_MIDI, 1000, 20);
  HSLHamHeaterShaker::WaitForShaker(HHS_MIDI);
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  if (i_intDilutionSetup == "1:100")
  {
    MECC::TraceComment(Translate("Add 20uL from Dilution Plate 1 to Dilution Plate 2"));
    STEPTRACKER::START_Activity(Translate("Sample Addition"), Translate("Adding 20uL from Dilution Plate 1 to Dilution Plate 2"), 22, 1);
    {
      loopCounter2 = 0;
      while (
         (ML_STAR.MIDI_Pipette2.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar50ulTipWithFilter, 1, ML_STAR.MIDI_Pipette, 1, ML_STAR.MIDI_Pipette2, 1);
        loopCounter2 = loopCounter2 + 1;
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        if (
           (ML_STAR.MIDI_Pipette2.GetCurrentPosition() > 0 && ML_STAR.MIDI_Pipette2.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar50ulTipWithFilter.SetMax(ML_STAR.MlStar50ulTipWithFilter.GetTotal());
      ML_STAR.MIDI_Pipette.SetMax(ML_STAR.MIDI_Pipette.GetTotal());
      ML_STAR.MIDI_Pipette2.SetMax(ML_STAR.MIDI_Pipette2.GetTotal());
      ML_STAR.MIDI_Pipette.SetCurrentPosition(1);
      ML_STAR.MIDI_Pipette2.SetCurrentPosition(1);
    }
  }
  else
  {
    MECC::TraceComment(Translate("Add 10uL from Dilution Plate 1 to Dilution Plate 2"));
    STEPTRACKER::START_Activity(Translate("Sample Addition"), Translate("Adding 10uL from Dilution Plate 1 to Dilution Plate 2"), 22, 1);
    {
      loopCounter2 = 0;
      while (
         (ML_STAR.MIDI_Pipette2.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MlStar50ulTipWithFilter, 1, ML_STAR.MIDI_Pipette, 1, ML_STAR.MIDI_Pipette2, 1);
        loopCounter2 = loopCounter2 + 1;
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        if (
           (ML_STAR.MIDI_Pipette2.GetCurrentPosition() > 0 && ML_STAR.MIDI_Pipette2.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MlStar50ulTipWithFilter.SetMax(ML_STAR.MlStar50ulTipWithFilter.GetTotal());
      ML_STAR.MIDI_Pipette.SetMax(ML_STAR.MIDI_Pipette.GetTotal());
      ML_STAR.MIDI_Pipette2.SetMax(ML_STAR.MIDI_Pipette2.GetTotal());
      ML_STAR.MIDI_Pipette.SetCurrentPosition(1);
      ML_STAR.MIDI_Pipette2.SetCurrentPosition(1);
    }
  }
  STEPTRACKER::TERMINATE_Activity();
  MECC::TraceComment(Translate("Vortex Dilution Plate 2 on HHS @ 1000RPM for 20 seconds"));
  STEPTRACKER::START_Activity(Translate("Vortexing Dilution Plate "), Translate("Mixing Dilution Plate 2"), 1, 1);
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  HSLHamHeaterShaker::StartShakerTimed(HHS_MIDI, 1000, 20);
  HSLHamHeaterShaker::WaitForShaker(HHS_MIDI);
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  MECC::TraceComment(Translate("Add Picogreen to 384 Well Plate"));
  STEPTRACKER::START_Activity(Translate("Loading Picogreen"), Translate("Adding 25uL Picogreen to 384 Well Plate"), 22, 1);
  {
    loopCounter2 = 0;
    while (
       (ML_STAR.seqQuantPlate1_SamplesReplicate1.GetCurrentPosition() > 0)
    && (ML_STAR.seqQuantPlate1_SamplesReplicate2.GetCurrentPosition() > 0)
    && (ML_STAR.seqQuantPlate1_SamplesReplicate3.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 1, ML_STAR.seqPicogreen, 1, ML_STAR.seqQuantPlate1_SamplesReplicate1, 1, ML_STAR.seqQuantPlate1_SamplesReplicate2, 1, ML_STAR.seqQuantPlate1_SamplesReplicate3, 1);
      loopCounter2 = loopCounter2 + 1;
      {
        	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
      }
      {
        	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
      }
      {
        	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
      }
      {
        	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
      }
      {
        	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
      }
      {
        	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
      }
      if (
         (ML_STAR.seqQuantPlate1_SamplesReplicate1.GetCurrentPosition() > 0 && ML_STAR.seqQuantPlate1_SamplesReplicate1.GetMax() == 0 )
      && (ML_STAR.seqQuantPlate1_SamplesReplicate2.GetCurrentPosition() > 0 && ML_STAR.seqQuantPlate1_SamplesReplicate2.GetMax() == 0 )
      && (ML_STAR.seqQuantPlate1_SamplesReplicate3.GetCurrentPosition() > 0 && ML_STAR.seqQuantPlate1_SamplesReplicate3.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.MlStar300ulStandardVolumeTipWithFilter.SetMax(ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetTotal());
    ML_STAR.seqPicogreen.SetMax(ML_STAR.seqPicogreen.GetTotal());
    ML_STAR.seqQuantPlate1_SamplesReplicate1.SetMax(ML_STAR.seqQuantPlate1_SamplesReplicate1.GetTotal());
    ML_STAR.seqQuantPlate1_SamplesReplicate2.SetMax(ML_STAR.seqQuantPlate1_SamplesReplicate2.GetTotal());
    ML_STAR.seqQuantPlate1_SamplesReplicate3.SetMax(ML_STAR.seqQuantPlate1_SamplesReplicate3.GetTotal());
    ML_STAR.seqPicogreen.SetCurrentPosition(1);
    ML_STAR.seqQuantPlate1_SamplesReplicate1.SetCurrentPosition(1);
    ML_STAR.seqQuantPlate1_SamplesReplicate2.SetCurrentPosition(1);
    ML_STAR.seqQuantPlate1_SamplesReplicate3.SetCurrentPosition(1);
  }
  MECC::TraceComment(Translate("Add Picogreen to standard curve positions on 384 Well Plate"));
  {
    loopCounter2 = 0;
    while (
       (ML_STAR.seqQuantStandardsTarget1.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 1, ML_STAR.seqPicogreen, 1, ML_STAR.seqQuantStandardsTarget1, 1);
      loopCounter2 = loopCounter2 + 1;
      {
        	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
      }
      {
        	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
      }
      {
        	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
      }
      {
        	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
      }
      {
        	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
      }
      {
        	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
      }
      if (
         (ML_STAR.seqQuantStandardsTarget1.GetCurrentPosition() > 0 && ML_STAR.seqQuantStandardsTarget1.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.MlStar300ulStandardVolumeTipWithFilter.SetMax(ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetTotal());
    ML_STAR.seqPicogreen.SetMax(ML_STAR.seqPicogreen.GetTotal());
    ML_STAR.seqQuantStandardsTarget1.SetMax(ML_STAR.seqQuantStandardsTarget1.GetTotal());
    ML_STAR.seqPicogreen.SetCurrentPosition(1);
    ML_STAR.seqQuantStandardsTarget1.SetCurrentPosition(1);
  }
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  STEPTRACKER::TERMINATE_Activity();
  MECC::TraceComment(Translate("Add Diluted Sample to 384 Well Plate"));
  STEPTRACKER::START_Activity(Translate("Loading Diluted Sample"), Translate("Adding 25uL of Diluted Sample to 384 Well Plate"), 22, 1);
  {
    loopCounter2 = 0;
    while (
       (ML_STAR.seqQuantPlate1_SamplesReplicate1.GetCurrentPosition() > 0)
    && (ML_STAR.seqQuantPlate1_SamplesReplicate2.GetCurrentPosition() > 0)
    && (ML_STAR.seqQuantPlate1_SamplesReplicate3.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.MIDI_Pipette2, 1, ML_STAR.seqQuantPlate1_SamplesReplicate1, 1, ML_STAR.seqQuantPlate1_SamplesReplicate2, 1, ML_STAR.seqQuantPlate1_SamplesReplicate3, 1, ML_STAR.MlStar50ulTipWithFilter, 1);
      loopCounter2 = loopCounter2 + 1;
      {
        	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
      }
      {
        	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
      }
      {
        	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
      }
      {
        	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
      }
      {
        	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
      }
      {
        	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
      }
      if (
         (ML_STAR.seqQuantPlate1_SamplesReplicate1.GetCurrentPosition() > 0 && ML_STAR.seqQuantPlate1_SamplesReplicate1.GetMax() == 0 )
      && (ML_STAR.seqQuantPlate1_SamplesReplicate2.GetCurrentPosition() > 0 && ML_STAR.seqQuantPlate1_SamplesReplicate2.GetMax() == 0 )
      && (ML_STAR.seqQuantPlate1_SamplesReplicate3.GetCurrentPosition() > 0 && ML_STAR.seqQuantPlate1_SamplesReplicate3.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.MIDI_Pipette2.SetMax(ML_STAR.MIDI_Pipette2.GetTotal());
    ML_STAR.seqQuantPlate1_SamplesReplicate1.SetMax(ML_STAR.seqQuantPlate1_SamplesReplicate1.GetTotal());
    ML_STAR.seqQuantPlate1_SamplesReplicate2.SetMax(ML_STAR.seqQuantPlate1_SamplesReplicate2.GetTotal());
    ML_STAR.seqQuantPlate1_SamplesReplicate3.SetMax(ML_STAR.seqQuantPlate1_SamplesReplicate3.GetTotal());
    ML_STAR.MlStar50ulTipWithFilter.SetMax(ML_STAR.MlStar50ulTipWithFilter.GetTotal());
    ML_STAR.MIDI_Pipette2.SetCurrentPosition(1);
    ML_STAR.seqQuantPlate1_SamplesReplicate1.SetCurrentPosition(1);
    ML_STAR.seqQuantPlate1_SamplesReplicate2.SetCurrentPosition(1);
    ML_STAR.seqQuantPlate1_SamplesReplicate3.SetCurrentPosition(1);
  }
  STEPTRACKER::TERMINATE_Activity();
  MECC::TraceComment(Translate("Add Standard Curve to 384 Well Plate"));
  STEPTRACKER::START_Activity(Translate("Standard Curve Addition"), Translate("Adding 25uL of Standard Curve to 384 Well Plate"), 22, 1);
  {
    loopCounter2 = 0;
    while (
       (ML_STAR.seqQuantStandardsTarget1.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.HSP_Pipette2, 1, ML_STAR.seqQuantStandardsTarget1, 1, ML_STAR.MlStar50ulTipWithFilter, 1);
      loopCounter2 = loopCounter2 + 1;
      {
        	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
      }
      {
        	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
      }
      {
        	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
      }
      {
        	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
      }
      {
        	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
      }
      {
        	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
      }
      if (
         (ML_STAR.seqQuantStandardsTarget1.GetCurrentPosition() > 0 && ML_STAR.seqQuantStandardsTarget1.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.HSP_Pipette2.SetMax(ML_STAR.HSP_Pipette2.GetTotal());
    ML_STAR.seqQuantStandardsTarget1.SetMax(ML_STAR.seqQuantStandardsTarget1.GetTotal());
    ML_STAR.MlStar50ulTipWithFilter.SetMax(ML_STAR.MlStar50ulTipWithFilter.GetTotal());
    ML_STAR.HSP_Pipette2.SetCurrentPosition(1);
    ML_STAR.seqQuantStandardsTarget1.SetCurrentPosition(1);
  }
  STEPTRACKER::TERMINATE_Activity();
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  HSLHamHeaterShaker::StartShaker(HHS_3, 1000);
  STEPTRACKER::START_Timer(Shaker_Timer, Translate("Mixing Picogreen Quant Plate"), Translate("Quick Mix"), 0, 0, 30, 1, 0, 1, 1, Translate("Mixing Quant Plate"));
  STEPTRACKER::TERMINATE_Timer(Shaker_Timer);
  HSLHamHeaterShaker::StopShaker(HHS_3);
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  MECC::TraceComment(Translate("Quantification Plate Preparation Completed"));
}

private function _GenerateIndexPrimerSequences( variable & io_arrIndexPrimers[], variable & io_arrTargetWellPositions[], sequence & io_seqIndexPrimerSource, sequence & io_seqIndexPrimerTarget ) void {
  private variable intNumberOfPrimers;
  private variable intPrimerLoopCounter;
  private variable strLabwareID;
  private variable intElementID;
  private variable strDummy;
  private variable strPositionID;
  private variable intParentElementID;
  SeqRemoveAll(io_seqIndexPrimerSource);
  SeqRemoveAll(io_seqIndexPrimerTarget);
  intNumberOfPrimers=io_arrIndexPrimers.GetSize();
  {
    for(intPrimerLoopCounter = 0; intPrimerLoopCounter < intNumberOfPrimers;)
    {
      intPrimerLoopCounter = intPrimerLoopCounter + 1;
      intElementID = VectorDb_Labware::IsBarcodeLoaded(intDeckID, io_arrIndexPrimers.ElementAt( intPrimerLoopCounter -1));
      VectorDb_Labware::GetLabwareByElementID(intElementID, intDeckID, intParentElementID, strPositionID, strDummy, strDummy, strDummy, strDummy, strDummy, strDummy, strDummy, strDummy, strDummy);
      VectorDb_Labware::GetLabwareByElementID(intParentElementID, intDeckID, strDummy, strLabwareID, strDummy, strDummy, strDummy, strDummy, strDummy, strDummy, strDummy, strDummy, strDummy);
      SeqAdd(io_seqIndexPrimerSource, strLabwareID, strPositionID);
      SeqAdd(io_seqIndexPrimerTarget, Translate("HSP_Pipette2"), io_arrTargetWellPositions.ElementAt( intPrimerLoopCounter -1));
    }
  }
  HSLSeqSortingLib::SortTwoSeqForChannels(ML_STAR, io_seqIndexPrimerTarget, io_seqIndexPrimerSource, HSLSeqSortingLib::RasterDistance::_9mm, HSLSeqSortingLib::SortMode::Single_Rack_Columns);
  TRACELEVEL::TraceSequence(TRACE_LEVEL_NONE, io_seqIndexPrimerSource);
  TRACELEVEL::TraceSequence(TRACE_LEVEL_NONE, io_seqIndexPrimerTarget);
}
