global device ML_STAR ("Nextera XT vNIST1.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "ASWStandardDialogs\\AswStatusDialog.hsl" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "Library\\NexteraXTPrep.hs_" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLUtilLib.hsl" }
 namespace _Method { #include "SMTs\\Tip Present Check_5ml_1ml.hs_" }
 namespace _Method { #include "Library\\NexteraXTProcesses.hs_" }
#include "Nextera XT vNIST1.res"
dialog customDialog_1;
dialog dialogHandle_2;
dialog dialogHandle_3;
dialog dialogHandle_4;
dialog dialogHandle_5;
dialog dialogHandle_6;
dialog dialogHandle_7;
dialog dialogHandle_8;
variable Number50Tips;
variable HHS1;
variable PlatesInStack1;
variable AnswerStopPoint;
variable Number1000Tips;
variable PlatesInStack2;
variable HHS2;
variable StartingTipPosition_1000;
variable HHS3;
variable PlatesInStack3;
variable AMPureVolumePerSample;
variable AMPureConcentrationPerSample;
variable AmpureConcentration;
variable loopCounter_CheckResources;
variable PlatesInStack4;
variable HHS4;
variable NXTKitConfig;
variable NumberOfIndexes;
variable HHS5;
variable Number300Tips;
variable SetTempCPAC;
variable AnswerPooling;
variable StartingTipPosition_300;
variable StartingTipPosition_50;
variable SetTempHHS1;
variable TipCarBCsToCheck_300_1;
variable GripperMode;
variable SetTempHHS2;
variable TipCarBCsToCheck_300_2;
variable TrackToScanBarcode;
variable SetTempHHS3;
variable NumberOfInputSamples;
variable SetTempHHS4;
variable NumberOfSamples;
variable VialCar5mLBCsToCheck_Rgts;
variable SetTempHHS5;
variable ResultOfPlateCheck_msg;
variable PlateCarBCsToCheck_PCR;
variable EmailNotifyFlag;
variable AnswerStartPoint;
variable AdapterBCsToRead;
variable TipCarBCsToCheck_50_1;
variable RunProcess1;
variable TipCarBCsToCheck_50_2;
variable RunProcess2;
variable VialCarBCsToCheck_Rgts;
variable ButtonClick_RunSettings;
variable SimOn;
variable TipCounterSet_Flag;
variable File_SampleSheet;
variable ResultOfPlateCheck_flag;
variable RunProcess3;
variable TrackToParkAL;
sequence GripperSequence;
file file1;
variable array_Index1Positions[];
variable array_Index1ID[];
variable array_Index2ID[];
variable arr_Index1ID[];
variable arr_Index2ID[];
variable array_Index2Positions[];
variable array_PCRPositions[];
dialog customDialog_9;
dialog customDialog_10;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    NEXTERAXTPREP::_InitLibrary();
    TIP_PRESENT_CHECK_5ML_1ML::_InitLibrary();
    NEXTERAXTPROCESSES::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  Nextera XT DNA Library Preparation\nBy:          Randy Pares, Hamilton Company, Reno, NV\nDate:      September 8, 2017\nVersion:  4.0\n\nBased on Illumina's Nextera XT DNA Library Preparation Reference Guide (part # 15031942 v01)\n\nVersion Notes:\n\n1. Added GenerateTipCarrierBarcodeStrings submethod to determine which tip positions are scanned\n2. Implemented logic to only scan for barcodes in tip carriers generated from the GenerateTipCarrierBarcodeStrings submethod\n3. Error handling in TruSeqProcesses/NexteraProcesses included in all tip pickup commands if tip is not picked up by channel:\n        - Channel will try \"Next\" recovery option three times\n        - User dialog will appear asking user to either reload tips or retry next tip rack\n        - If there are not at least 96 tips left, the user will not be able to retry on the next tip rack\n        - After selected recovery, channels will attempt ONE additional tip pickup\n        - Method will abort if tip pickup is not successfull\n4. Tip counter is now written after every step that picks up a tip\n5. Created new submethods in NexteraXTProcesses library for pipetting NaOH and pooling libraries\n6. Renamed submethod that pipettes RSB from AddReagentFromVial_4Vials to AddRSBFromVial_4Vials inProcesses library\n7. Standardized ILMN tip counters in NexteraXTPrep library\n\n*************************************************************************************************************************************"));
    SimOn = HSLML_STAR::IsSimulatorMode(ML_STAR);
    AswStatusDialog::Initialize(Translate("Nextera XT DNA Library Preparation"));
    AswStatusDialog::SetStatusText(Translate("Run Preparation..."));
    MECC::TraceComment(Translate("***** Set type of gripper:  1=iSWAP, 2=COREGrippers ******"));
    GripperMode = 1;
    Trace ("***** Grippermode:  ", GripperMode);
    SeqOperatorAssignSeq(GripperSequence, ML_STAR.COREGripTool);
    if (GripperMode == 1)
    {
      TrackToScanBarcode = 54;
    }
    else
    {
      TrackToScanBarcode = 5;
    }
    TrackToParkAL = 54;
    MECC::TraceComment(Translate("***** Set email notification on/off for reload steps: 0 = off, 1 = on ******"));
    EmailNotifyFlag = 0;
    Trace ("***** EmailNotifyFlag:  ", EmailNotifyFlag);
    AswStatusDialog::AppendText(Translate("   User selections..."));
    file1.AddField("AnswerStartPoint", AnswerStartPoint, hslInteger);
    file1.AddField("AnswerStopPoint", AnswerStopPoint, hslInteger);
    file1.AddField("NXTKitConfig", NXTKitConfig, hslInteger);
    file1.AddField("File_SampleSheet", File_SampleSheet, hslString, 255);
    file1.AddField("NumberOfSamples", NumberOfSamples, hslInteger);
    file1.AddField("AmpureConcentration", AmpureConcentration, hslInteger);
    file1.AddField("AnswerPooling", AnswerPooling, hslInteger);
    file1.SetDelimiter(";");
    if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\Illumina\\Files\\CustomDialogDefaults_NexteraXT.txt", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\Illumina\\Files\\CustomDialogDefaults_NexteraXT.txt", "HxMetEdCompCmd");
    }
    if( 0 == file1.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    customDialog_1.InitCustomDialog("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");
    customDialog_1.SetCustomDialogProperty( "comboBox1.SelectedIndex", AnswerStartPoint );
    customDialog_1.SetCustomDialogProperty( "comboBox2.SelectedIndex", AnswerStopPoint );
    customDialog_1.SetCustomDialogProperty( "path1.Path", File_SampleSheet );
    customDialog_1.SetCustomDialogProperty( "numeric3.Value", AnswerPooling );
    customDialog_1.SetCustomDialogProperty( "numeric1.Value", NumberOfSamples );
    customDialog_1.SetCustomDialogProperty( "comboBox3.SelectedIndex", NXTKitConfig );
    customDialog_1.SetCustomDialogProperty( "comboBox4.SelectedIndex", AmpureConcentration );
    customDialog_1.ShowCustomDialog();
    ButtonClick_RunSettings = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    AnswerStartPoint = customDialog_1.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
    AnswerStopPoint = customDialog_1.GetCustomDialogProperty( "comboBox2.SelectedIndex" );
    File_SampleSheet = customDialog_1.GetCustomDialogProperty( "path1.Path" );
    AnswerPooling = customDialog_1.GetCustomDialogProperty( "numeric3.Value" );
    NumberOfSamples = customDialog_1.GetCustomDialogProperty( "numeric1.Value" );
    NXTKitConfig = customDialog_1.GetCustomDialogProperty( "comboBox3.SelectedIndex" );
    AmpureConcentration = customDialog_1.GetCustomDialogProperty( "comboBox4.SelectedIndex" );
    if (ButtonClick_RunSettings == 3)
    {
      abort;
    }
    if (AmpureConcentration == 1)
    {
      AMPureConcentrationPerSample = 0.6;
    }
    if (AmpureConcentration == 2)
    {
      AMPureConcentrationPerSample = 1.8;
    }
    AMPureVolumePerSample = 50 * AMPureConcentrationPerSample;
    if (AnswerStopPoint < AnswerStartPoint)
    {
      dialogHandle_3.SetOutput(Translate("The selection for Stopping Point occurs before the selection for Starting Point.  Method will now abort."));
      dialogHandle_3.ShowOutput(Translate("Selections Incorrect"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
      abort;
    }
    file1.AddField("AnswerStartPoint", AnswerStartPoint, hslInteger);
    file1.AddField("AnswerStopPoint", AnswerStopPoint, hslInteger);
    file1.AddField("NXTKitConfig", NXTKitConfig, hslInteger);
    file1.AddField("File_SampleSheet", File_SampleSheet, hslString, 255);
    file1.AddField("NumberOfSamples", NumberOfSamples, hslInteger);
    file1.AddField("AmpureConcentration", AmpureConcentration, hslInteger);
    file1.AddField("AnswerPooling", AnswerPooling, hslInteger);
    file1.SetDelimiter(";");
    if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\Illumina\\Files\\CustomDialogDefaults_NexteraXT.txt", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\Illumina\\Files\\CustomDialogDefaults_NexteraXT.txt", "HxMetEdCompCmd");
    }
    if( 0 == file1.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    Trace ("Starting point index:  ", AnswerStartPoint);
    Trace ("Stopping point index:  ", AnswerStopPoint);
    Trace ("NXT Kit (1 = 24 Indexes; 2 = 96 Indexes; 3 = 96 Indexes v2 Set A; 4 = 96 Indexes v2 Set B; 5 = 96 Indexes v2 Set C; 6 = 96 Indexes v2 Set C):  ", NXTKitConfig);
    Trace ("Sample plate file:  ", File_SampleSheet);
    Trace ("Number of samples:  ", NumberOfSamples);
    Trace ("Pooling? (>0=yes, 0=no, # = # of pooled sample wells to process):  ", AnswerPooling);
    if (File_SampleSheet == "")
    {
      dialogHandle_8.SetInputSize(1);
      dialogHandle_8.SetInputField(0, Translate("Please browse for and select the Sample Plate File file (txt file)."), hslString, "");
      dialogHandle_8.ShowInput(Translate("Sample Sheet File"), hslInfinite, hslOKOnly | hslDefButton1);
      File_SampleSheet = dialogHandle_8.GetInputField(0);
      Trace ("***** Sample Plate File:  ", File_SampleSheet);
    }
    array_Index1Positions.SetSize(0);
    array_Index2Positions.SetSize(0);
    array_Index1ID.SetSize(0);
    array_Index2ID.SetSize(0);
    array_PCRPositions.SetSize(0);
    if (AnswerStartPoint == 1)
    {
      NumberOfInputSamples = NumberOfSamples;
      NEXTERAXTPREP::ReadSamplePlateFile(File_SampleSheet, NumberOfSamples, NumberOfIndexes, NXTKitConfig, array_Index1Positions, array_Index2Positions, array_PCRPositions, arr_Index1ID, arr_Index2ID);
      Trace ("***** Number of Samples from file:  ", NumberOfSamples);
      if (NumberOfSamples != NumberOfInputSamples)
      {
        dialogHandle_5.SetOutput(Translate("The number of samples represented by the sample file ("), NumberOfSamples, Translate(") does not match the inputed number of samples ("), NumberOfInputSamples, Translate(").. Method will abort."));
        dialogHandle_5.ShowOutput("", hslOKOnly | hslQuestion | hslDefButton1, hslInfinite);
        abort;
      }
    }
    if (AnswerStartPoint == 1)
    {
      if (NXTKitConfig == 1)
      {
        if (NumberOfSamples > 24)
        {
          dialogHandle_4.SetOutput(Translate("The number of samples ("), NumberOfSamples, Translate(") is not compatible with the selected kit type."), Translate("\n\nPlease restart the method and revise the kit selection/number of samples."), Translate("\n\nMethod will abort."));
          dialogHandle_4.ShowOutput(Translate("Number of samples incompatible"), hslOKOnly | hslExclamation | hslDefButton1, hslInfinite);
          abort;
        }
      }
      else
      {
      }
    }
    ML_STAR.HSP_Pipette.SetCount(NumberOfSamples);
    ML_STAR.HSP_Pipette2.SetCount(NumberOfSamples);
    ML_STAR.HSP_HHS1.SetCount(NumberOfSamples);
    ML_STAR.HSP_HHS3.SetCount(NumberOfSamples);
    ML_STAR.HSP_CPAC.SetCount(NumberOfSamples);
    ML_STAR.MIDI_HHS3.SetCount(NumberOfSamples);
    ML_STAR.MIDI_Pipette.SetCount(NumberOfSamples);
    ML_STAR.MIDI_CPAC.SetCount(NumberOfSamples);
    ML_STAR.MIDI_OnMagnet.SetCount(NumberOfSamples);
    AswStatusDialog::AppendText(Translate("   Initializing ML STAR..."));
    MECC::TraceComment(Translate("********** Initialize Devices *********"));
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    AswStatusDialog::AppendText(Translate("   Initializing Hamilton Heater Shakers (HHSs)..."));
    NEXTERAXTPREP::InitHHSs(HHS1, HHS2, HHS3, HHS4, HHS5, SimOn);
    if (AnswerStartPoint == 1)
    {
      SetTempHHS1 = 55;
      SetTempHHS2 = 0;
      SetTempHHS3 = 0;
      SetTempHHS4 = 0;
      SetTempHHS5 = 0;
      SetTempCPAC = 10;
    }
    if (AnswerStartPoint >= 2)
    {
      SetTempHHS1 = 0;
      SetTempHHS2 = 0;
      SetTempHHS3 = 0;
      SetTempHHS4 = 0;
      SetTempHHS5 = 0;
      SetTempCPAC = 0;
    }
    Trace ("Setting Temperatures of Devices:");
    Trace ("HHS1 set temperature:  ", SetTempHHS1);
    Trace ("HHS2 set temperature:  ", SetTempHHS2);
    Trace ("HHS3 set temperature:  ", SetTempHHS3);
    Trace ("HHS4 set temperature:  ", SetTempHHS4);
    Trace ("HHS5 set temperature:  ", SetTempHHS5);
    Trace ("CPAC set temperature:  ", SetTempCPAC);
    NEXTERAXTPREP::SetHHSTemperature(HHS1, SetTempHHS1);
    NEXTERAXTPREP::SetHHSTemperature(HHS2, SetTempHHS2);
    NEXTERAXTPREP::SetHHSTemperature(HHS3, SetTempHHS3);
    NEXTERAXTPREP::SetHHSTemperature(HHS4, SetTempHHS4);
    NEXTERAXTPREP::SetHHSTemperature(HHS5, SetTempHHS5);
    if (SimOn == 0)
    {
      if (SetTempCPAC > 0)
      {
        AswStatusDialog::SetStatusText(Translate("   Initializing CPAC chiller..."));
        NEXTERAXTPREP::InitCPAC(SimOn);
        NEXTERAXTPREP::SetCPACTemperature(SetTempCPAC);
      }
      AswStatusDialog::AppendText(Translate("   Initializing Liquid Waste Sensor..."));
      NEXTERAXTPREP::InitLiquidWasteSensor();
    }
    AswStatusDialog::AppendText(Translate("   Resources required..."));
    CalculateResources();
    AswStatusDialog::AppendText(Translate("   Tip Counters..."));
    NEXTERAXTPREP::TipCounterRead(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, Number50Tips, Number300Tips, Number1000Tips);
    NEXTERAXTPREP::GenerateTipCarrierBarcodeStrings(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, TipCarBCsToCheck_50_2, TipCarBCsToCheck_50_1, TipCarBCsToCheck_300_2, TipCarBCsToCheck_300_1, PlateCarBCsToCheck_PCR);
    TipCounterSet_Flag = 1;
    StartingTipPosition_50 = ML_STAR.MlStar50ulTipWithFilter.GetCurrentPosition();
    StartingTipPosition_300 = ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetCurrentPosition();
    StartingTipPosition_1000 = ML_STAR.MlStar1000ulHighVolumeTipWithFilter.GetCurrentPosition();
    customDialog_9.InitCustomDialog("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");
    customDialog_9.ShowCustomDialog();
    if(0){
      AswStatusDialog::AppendText(Translate("   Loading the deck..."));
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      if (TipCarBCsToCheck_50_2 != "")
      {
        Trace ("Tip rack positions to check on TIP_CAR_480BC_TIP_50F_2:  ", TipCarBCsToCheck_50_2);
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
      if (TipCarBCsToCheck_50_1 != "")
      {
        Trace ("Tip rack positions to check on TIP_CAR_480BC_TIP_50F_1:  ", TipCarBCsToCheck_50_1);
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
      if (TipCarBCsToCheck_300_2 != "")
      {
        Trace ("Tip rack positions to check on TIP_CAR_480BC_STF_2:  ", TipCarBCsToCheck_300_2);
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
      if (TipCarBCsToCheck_300_1 != "")
      {
        Trace ("Tip rack positions to check on TIP_CAR_480BC_TIP_STF_1:  ", TipCarBCsToCheck_300_1);
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
      if (RunProcess3 == 1)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
      if (RunProcess2 == 1)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
      if (RunProcess3 == 1)
      {
        Trace ("Barcodes to check:  ", VialCar5mLBCsToCheck_Rgts);
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
      if (AnswerStartPoint <= 2)
      {
        Trace ("Barcodes to check:  ", VialCarBCsToCheck_Rgts);
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
      if (RunProcess1 == 1)
      {
        Trace ("Barcodes to check:  ", AdapterBCsToRead);
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    AswStatusDialog::AppendText(Translate("   Loading the deck..."));
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    if (TipCarBCsToCheck_50_2 != "")
    {
      Trace ("Tip rack positions to check on TIP_CAR_480BC_TIP_50F_2:  ", TipCarBCsToCheck_50_2);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    if (TipCarBCsToCheck_50_1 != "")
    {
      Trace ("Tip rack positions to check on TIP_CAR_480BC_TIP_50F_1:  ", TipCarBCsToCheck_50_1);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    if (TipCarBCsToCheck_300_2 != "")
    {
      Trace ("Tip rack positions to check on TIP_CAR_480BC_STF_2:  ", TipCarBCsToCheck_300_2);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    if (TipCarBCsToCheck_300_1 != "")
    {
      Trace ("Tip rack positions to check on TIP_CAR_480BC_TIP_STF_1:  ", TipCarBCsToCheck_300_1);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    if (RunProcess3 == 1)
    {
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    if (RunProcess2 == 1)
    {
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    if (RunProcess3 == 1)
    {
      Trace ("Barcodes to check:  ", VialCar5mLBCsToCheck_Rgts);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    if (AnswerStartPoint <= 2)
    {
      Trace ("Barcodes to check:  ", VialCarBCsToCheck_Rgts);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    if (RunProcess1 == 1)
    {
      Trace ("Barcodes to check:  ", AdapterBCsToRead);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    customDialog_10.InitCustomDialog("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");
    customDialog_10.ShowCustomDialog();
    if (SimOn == 0)
    {
      AswStatusDialog::AppendText(Translate("   Checking plate inventory..."));
      NEXTERAXTPREP::CheckPlatesInStacks(ML_STAR, ML_STAR.Stack1, ML_STAR.Stack2, ML_STAR.Stack3, ML_STAR.Stack4, PlatesInStack1, PlatesInStack2, PlatesInStack3, PlatesInStack4, ResultOfPlateCheck_flag, ResultOfPlateCheck_msg);
      if (ResultOfPlateCheck_flag == 1)
      {
        {
          loopCounter_CheckResources = 0;
          while (ResultOfPlateCheck_flag == 1)
          {
            loopCounter_CheckResources = loopCounter_CheckResources + 1;
            dialogHandle_6.SetOutput(ResultOfPlateCheck_msg, Translate("\n\nThe stacker carrier will be unloaded."));
            dialogHandle_6.ShowOutput(Translate("Incorrect Number of Plates in Stacker Carrier"), hslOKOnly | hslExclamation | hslDefButton1, hslInfinite);
            ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
            dialogHandle_7.SetOutput(Translate("Add the appropriate number of plates to the correct stack and click 'OK' to reattempt plate check."));
            dialogHandle_7.ShowOutput(Translate("Reload appropriate stack"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
            NEXTERAXTPREP::CheckPlatesInStacks(ML_STAR, ML_STAR.Stack1, ML_STAR.Stack2, ML_STAR.Stack3, ML_STAR.Stack4, PlatesInStack1, PlatesInStack2, PlatesInStack3, PlatesInStack4, ResultOfPlateCheck_flag, ResultOfPlateCheck_msg);
          }
        }
        ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
      }
    }
    if (RunProcess1 == 1)
    {
      Process1_TagmentPCR();
    }
    if (RunProcess2 == 1)
    {
      Process2_Cleanup();
    }
    if (RunProcess3 == 1)
    {
      Process3_NormalizePool();
    }
    AswStatusDialog::SetStatusText(Translate("Unloading the deck..."));
    if (GripperMode == 1)
    {
      ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
    MECC::TraceComment(Translate("***** Unload Carriers *****"));
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    if (RunProcess1 == 1)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    if (AnswerStartPoint <= 2)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    if (RunProcess3 == 1)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    if (RunProcess2 == 1)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    if (RunProcess3 == 1)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    AswStatusDialog::SetStatusText(Translate("Preparing for run shutdown..."));
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
    NEXTERAXTPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
    if (SimOn == 0)
    {
      NEXTERAXTPREP::SetHHSTemperature(HHS1, 0);
      NEXTERAXTPREP::SetHHSTemperature(HHS2, 0);
      NEXTERAXTPREP::SetHHSTemperature(HHS3, 0);
      NEXTERAXTPREP::SetHHSTemperature(HHS4, 0);
      NEXTERAXTPREP::SetHHSTemperature(HHS5, 0);
    }
    NEXTERAXTPREP::TerminateHHSs();
    NEXTERAXTPREP::TerminateCPAC();
    dialogHandle_2.SetOutput(Translate("Please empty the tip waste, and check/empty the liquid waste container."), Translate("\n\nConsider performing Daily/Weekly Maintenance at this time."));
    dialogHandle_2.ShowOutput(Translate("Method Complete"), hslOKOnly | hslInformation | hslDefButton1, 3600);
    AswStatusDialog::Terminate();
    NEXTERAXTPREP::_ExitLibrary();
    TIP_PRESENT_CHECK_5ML_1ML::_ExitLibrary();
    NEXTERAXTPROCESSES::_ExitLibrary();
  } }
