private function CalculateResources(  ) void ;
function Check_TipQty( sequence & seq_TipsToCheck, variable var_TipsRequired, variable var_TipType ) void ;
private function CleanUp( variable var_VolAMPure, variable var_SupDiscardVol, variable var_ResuspensionBuffer, variable var_HSPTransferVol ) void ;
private function EmailNotify( variable To, variable Subject, variable Body ) void ;
private function Process1_TagmentPCR(  ) void ;
private function Process2_Cleanup(  ) void ;
private function Process3_NormalizePool(  ) void ;
private function WaitForAndCheckTimer( timer & IncubationTimer ) void ;
private function _VersionHistory(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  private variable ResultTipCheck;
  private variable ChPatternAbort;
  MECC::TraceComment(Translate("*************************************************************************\n******************** METHOD HAS ABORTED ********************\n*************************************************************************\n"));
  AswStatusDialog::SetStatusText(Translate("Method is aborting..."));
  HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
  if (TipCounterSet_Flag == 1)
  {
    NEXTERAXTPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  }
  if (SimOn == 0)
  {
    NEXTERAXTPREP::SetHHSTemperature(HHS1, 0);
    NEXTERAXTPREP::SetHHSTemperature(HHS2, 0);
    NEXTERAXTPREP::SetHHSTemperature(HHS3, 0);
    NEXTERAXTPREP::SetHHSTemperature(HHS4, 0);
    NEXTERAXTPREP::SetHHSTemperature(HHS5, 0);
  }
  NEXTERAXTPREP::TerminateHHSs();
  NEXTERAXTPREP::TerminateCPAC();
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  ResultTipCheck = TIP_PRESENT_CHECK_5ML_1ML::Check_Tips_Present_1ml(ML_STAR, ChPatternAbort, 8);
  if (ResultTipCheck == 1)
  {
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
  AswStatusDialog::Terminate();
}

private function CalculateResources(  ) void {
  private dialog customDialog_1;
  private dialog customDialog_2;
  private variable RacksOf50s;
  private variable TipsPerSample_1000_1;
  private variable var_IndexLastPos;
  private variable ExtraTips300_1;
  private variable TipsPerSample_1000_2;
  private variable Vol_NT;
  private variable Vol_LNW1_mL;
  private variable Index1;
  private variable Vol_EtOH80;
  private variable ExtraTips50;
  private variable Vol_AMPure_mL;
  private variable TipsPerSample_1000_3;
  private variable ExtraTips300;
  private variable Index2;
  private variable ExtraTips300_2;
  private variable Vol_LNA1_LNB1_Mix_mL;
  private variable Vol_NPM;
  private variable Vol_ATM;
  private variable ExtraTips300_3;
  private variable Vol_NaOH_mL;
  private variable Vol_EtOH80_mL_Tub1;
  private variable Vol_NaOH;
  private variable TipsPerSample_300_1;
  private variable FoundIndex;
  private variable ExtraTips1000_1;
  private variable Vol_EtOH80_mL_Tub2;
  private variable TipsPerSample_300_2;
  private variable ExtraTips1000_2;
  private variable StartingPlatePosition;
  private variable Vol_AMPure;
  private variable Vol_EtOH80_mL_Tub3;
  private variable TipsPerSample_300_3;
  private variable ExtraTips1000_3;
  private variable TipsPerSample_50;
  private variable SamplesMoreThan24;
  private variable TipsPerSample_1000;
  private variable Index1_loopCounter3;
  private variable Vol_LNW1;
  private variable Vol_LNW1_2_mL;
  private variable Vol_LNW1_2;
  private variable TipsPerSample_50_1;
  private variable Index2_loopCounter3;
  private variable SamplesMoreThan48;
  private variable ExtraTips1000;
  private variable TipsPerSample_50_2;
  private variable Vol_EtOH80_mL;
  private variable ExtraTips50_1;
  private variable TipsPerSample_50_3;
  private variable Vol_RSB1;
  private variable PlatesInStack1_1;
  private variable ExtraTips50_2;
  private variable loopCounter1;
  private variable TipsPerSample_300;
  private variable Vol_LNS1;
  private variable Vol_TD2;
  private variable Vol_RSB2;
  private variable Vol_LNA1_LNB1_Mix;
  private variable PlatesInStack2_1;
  private variable ExtraTips50_3;
  private variable PlatesInStack1_2;
  private variable loopCounter2;
  private variable Vol_RSB3;
  private variable PlatesInStack3_1;
  private variable PlatesInStack1_3;
  private variable RacksOf300s;
  private variable PlatesInStack2_2;
  private variable Vol_TD;
  private variable loopCounter3;
  private variable Text_Pos3;
  private variable EtOH80_TubsRequired;
  private variable Vol_RSB4;
  private variable TrackingEthanolVolume_80;
  private variable PlatesInStack2_3;
  private variable PlatesInStack4_1;
  private variable RecordsToCheck;
  private variable Vol_LNS1_mL;
  private variable PlatesInStack3_2;
  private variable Text_Pos4;
  private variable PlatesInStack3_3;
  private variable PlatesInStack4_2;
  private variable Text_Pos5;
  private variable SamplesMoreThan72;
  private variable PlatesInStack4_3;
  private variable arr_Compare[];
  MECC::TraceComment(Translate("********** Submethod:  CalculateResources **********"));
  if (AnswerStartPoint == 1)
  {
    RunProcess1 = 1;
    if (AnswerStopPoint >= 2)
    {
      RunProcess2 = 1;
    }
    if (AnswerStopPoint >= 3)
    {
      RunProcess3 = 1;
    }
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
  }
  if (AnswerStartPoint == 2)
  {
    RunProcess1 = 0;
    RunProcess2 = 1;
    if (AnswerStopPoint >= 3)
    {
      RunProcess3 = 1;
    }
  }
  if (AnswerStartPoint == 3)
  {
    RunProcess1 = 0;
    RunProcess2 = 0;
    RunProcess3 = 1;
  }
  Trace ("Run Process 1?  (1=Yes, 0=No):  ", RunProcess1);
  Trace ("Run Process 2?  (1=Yes, 0=No):  ", RunProcess2);
  Trace ("Run Process 3?  (1=Yes, 0=No):  ", RunProcess3);
  if (RunProcess1 == 1)
  {
    PlatesInStack1_1 = 0;
    PlatesInStack2_1 = 0;
    PlatesInStack3_1 = 0;
    PlatesInStack4_1 = 1;
  }
  if (RunProcess2 == 1)
  {
    PlatesInStack1_2 = 1;
    PlatesInStack2_2 = 0;
    PlatesInStack3_2 = 0;
    PlatesInStack4_2 = 1;
  }
  if (RunProcess3 == 1)
  {
    PlatesInStack1_3 = 1;
    PlatesInStack2_3 = 0;
    PlatesInStack3_3 = 0;
    if (AnswerPooling > 0)
    {
      PlatesInStack4_3 = 2;
    }
    else
    {
      PlatesInStack4_3 = 1;
    }
  }
  PlatesInStack1 = PlatesInStack1_1 + PlatesInStack1_2 + PlatesInStack1_3 ;
  PlatesInStack2 = PlatesInStack2_1 + PlatesInStack2_2 + PlatesInStack2_3 ;
  PlatesInStack3 = PlatesInStack3_1 + PlatesInStack3_2 + PlatesInStack3_3 ;
  PlatesInStack4 = PlatesInStack4_1 + PlatesInStack4_2 + PlatesInStack4_3 ;
  Trace ("Number of plates in Stack 1 required:  ", PlatesInStack1);
  Trace ("Number of plates in Stack 2 required:  ", PlatesInStack2);
  Trace ("Number of plates in Stack 3 required:  ", PlatesInStack3);
  Trace ("Number of plates in Stack 4 required:  ", PlatesInStack4);
  if(0){
    if (PlatesInStack1 < 3)
    {
      StartingPlatePosition = 4 - PlatesInStack1;
      ML_STAR.Stack1.SetCurrentPosition(StartingPlatePosition);
    }
    if (PlatesInStack2 < 3)
    {
      StartingPlatePosition = 4 - PlatesInStack2;
      ML_STAR.Stack2.SetCurrentPosition(StartingPlatePosition);
    }
    if (PlatesInStack3 < 3)
    {
      StartingPlatePosition = 4 - PlatesInStack3;
      ML_STAR.Stack3.SetCurrentPosition(StartingPlatePosition);
    }
    if (PlatesInStack4 < 6)
    {
      StartingPlatePosition = 7 - PlatesInStack4;
      ML_STAR.Stack4.SetCurrentPosition(StartingPlatePosition);
    }
  }
  if (PlatesInStack1 < 2)
  {
    StartingPlatePosition = 3 - PlatesInStack1;
    ML_STAR.Stack1.SetCurrentPosition(StartingPlatePosition);
  }
  if (PlatesInStack2 < 2)
  {
    StartingPlatePosition = 3 - PlatesInStack2;
    ML_STAR.Stack2.SetCurrentPosition(StartingPlatePosition);
  }
  if (PlatesInStack3 < 2)
  {
    StartingPlatePosition = 3 - PlatesInStack3;
    ML_STAR.Stack3.SetCurrentPosition(StartingPlatePosition);
  }
  if (PlatesInStack4 < 5)
  {
    StartingPlatePosition = 6 - PlatesInStack4;
    ML_STAR.Stack4.SetCurrentPosition(StartingPlatePosition);
  }
  if (RunProcess1 == 1)
  {
    TipsPerSample_50_1 = 7;
    ExtraTips50_1 = 0;
    TipsPerSample_300_1 = 0;
    ExtraTips300_1 = 0;
    TipsPerSample_1000_1 = 0;
    ExtraTips1000_1 = 0;
  }
  if (RunProcess2 == 1)
  {
    TipsPerSample_50_2 = 3;
    ExtraTips50_2 = 0;
    TipsPerSample_300_2 = 5;
    ExtraTips300_2 = 0;
    TipsPerSample_1000_2 = 0;
    ExtraTips1000_2 = 24;
  }
  if (RunProcess3 == 1)
  {
    if (AnswerPooling > 0)
    {
      TipsPerSample_50_3 = 10;
    }
    else
    {
      TipsPerSample_50_3 = 9;
    }
    ExtraTips50_3 = 0;
    TipsPerSample_300_3 = 1;
    ExtraTips300_3 = 0;
    TipsPerSample_1000_3 = 0;
    ExtraTips1000_3 = 1;
  }
  TipsPerSample_50   = (TipsPerSample_50_1   + TipsPerSample_50_2   + TipsPerSample_50_3)   * NumberOfSamples;
  TipsPerSample_300  = (TipsPerSample_300_1  + TipsPerSample_300_2  + TipsPerSample_300_3)  * NumberOfSamples;
  TipsPerSample_1000 = (TipsPerSample_1000_1 + TipsPerSample_1000_2 + TipsPerSample_1000_3) * NumberOfSamples;
  ExtraTips50   = ExtraTips50_1   + ExtraTips50_2   + ExtraTips50_3  ;
  ExtraTips300  = ExtraTips300_1  + ExtraTips300_2  + ExtraTips300_3 ;
  ExtraTips1000 = ExtraTips1000_1 + ExtraTips1000_2 + ExtraTips1000_3;
  Number50Tips = TipsPerSample_50 + ExtraTips50;
  Number300Tips = TipsPerSample_300 + ExtraTips300;
  Number1000Tips = TipsPerSample_1000 + ExtraTips1000;
  Trace ("Number of 50ul tips required:  ", Number50Tips);
  Trace ("Number of 300ul tips required:  ", Number300Tips);
  Trace ("Number of 1000ul tips required:  ", Number1000Tips);
  RacksOf50s = Number50Tips / (96 * 1.0);
  RacksOf50s = MthCeiling(RacksOf50s);
  RacksOf300s = Number300Tips / (96 * 1.0);
  RacksOf300s = MthCeiling(RacksOf300s);
  if (AnswerStartPoint == 1)
  {
    Text_Pos3 = Translate("Empty");
    Text_Pos4 = Translate("HSP with normalized gDNA (0.2ng/uL)");
    Text_Pos5 = Translate("Empty");
  }
  if (AnswerStartPoint == 2)
  {
    Text_Pos3 = Translate("HSP plate with amplified library");
    Text_Pos4 = Translate("Empty");
    Text_Pos5 = Translate("Empty");
  }
  if (AnswerStartPoint == 3)
  {
    Text_Pos3 = Translate("Empty");
    Text_Pos4 = Translate("HSP plate with cleaned library");
    Text_Pos5 = Translate("Empty");
  }
  PlateCarBCsToCheck_PCR = Translate("TIP1,TIP2,4_PCR96");
  VialCarBCsToCheck_Rgts = Translate("");
  if (RunProcess1 == 1)
  {
    if (NumberOfSamples > 48)
    {
      VialCarBCsToCheck_Rgts = Translate("1,2,3,4,5,");
    }
    else
    {
      VialCarBCsToCheck_Rgts = Translate("1,3,4,5,");
    }
  }
  if (RunProcess2 == 1)
  {
    if (NumberOfSamples > 72)
    {
      VialCarBCsToCheck_Rgts = VialCarBCsToCheck_Rgts + Translate("6,7,8,9");
    }
    else
    {
      if (NumberOfSamples > 48)
      {
        VialCarBCsToCheck_Rgts = VialCarBCsToCheck_Rgts + Translate("6,7,8");
      }
      else
      {
        if (NumberOfSamples > 24)
        {
          VialCarBCsToCheck_Rgts = VialCarBCsToCheck_Rgts + Translate("6,7");
        }
        else
        {
          VialCarBCsToCheck_Rgts = VialCarBCsToCheck_Rgts + Translate("6");
        }
      }
    }
  }
  if (RunProcess3 == 1)
  {
    if (NumberOfSamples > 48)
    {
      VialCar5mLBCsToCheck_Rgts = Translate("1,2,3,4");
    }
    else
    {
      VialCar5mLBCsToCheck_Rgts = Translate("1,2,4");
    }
  }
  AdapterBCsToRead = Translate("");
  if (RunProcess1 == 1)
  {
    MECC::TraceComment(Translate("****** Determine which adapter barcodes to look for during loading ....."));
    arr_Compare.SetSize(0);
    {
      for(loopCounter2 = 0; loopCounter2 < NumberOfSamples;)
      {
        loopCounter2 = loopCounter2 + 1;
        Index1=array_Index1Positions.GetAt(loopCounter2-1);
        FoundIndex = 0;
        RecordsToCheck=arr_Compare.GetSize();
        {
          for(loopCounter3 = 0; loopCounter3 < RecordsToCheck;)
          {
            loopCounter3 = loopCounter3 + 1;
            Index1_loopCounter3=arr_Compare.GetAt(loopCounter3-1);
            if (Index1 == Index1_loopCounter3)
            {
              FoundIndex = 1;
              break;
            }
          }
        }
        if (FoundIndex == 0)
        {
          if(0){
            Index1 = StrIStr(Index1);
          }
          AdapterBCsToRead = AdapterBCsToRead + Index1;
          AdapterBCsToRead = AdapterBCsToRead + Translate(",");
          if(0){
            Index1 = StrIVal(Index1);
          }
          arr_Compare.AddAsLast(Index1);
        }
      }
    }
    var_IndexLastPos=arr_Compare.GetSize();
    if (NumberOfIndexes == 2)
    {
      arr_Compare.SetSize(0);
      {
        for(loopCounter1 = 0; loopCounter1 < NumberOfSamples;)
        {
          loopCounter1 = loopCounter1 + 1;
          Index2=array_Index2Positions.GetAt(loopCounter1-1);
          FoundIndex = 0;
          RecordsToCheck=arr_Compare.GetSize();
          {
            for(loopCounter3 = 0; loopCounter3 < RecordsToCheck;)
            {
              loopCounter3 = loopCounter3 + 1;
              Index2_loopCounter3=arr_Compare.GetAt(loopCounter3-1);
              if(0){
                Index2_loopCounter3 = StrIVal(Index2_loopCounter3);
              }
              if (Index2 == Index2_loopCounter3)
              {
                FoundIndex = 1;
                break;
              }
            }
          }
          if (FoundIndex == 0)
          {
            if(0){
              Index2 = StrIStr(Index2);
            }
            AdapterBCsToRead = AdapterBCsToRead + Index2;
            AdapterBCsToRead = AdapterBCsToRead + Translate(",");
            arr_Compare.AddAsLast(Index2);
          }
        }
      }
    }
    Trace (AdapterBCsToRead);
  }
  SamplesMoreThan24 = NumberOfSamples - 24;
  SamplesMoreThan48 = NumberOfSamples - 48;
  SamplesMoreThan72 = NumberOfSamples - 72;
  TrackingEthanolVolume_80 = 0;
  if (RunProcess1 == 1)
  {
    Vol_NT = NumberOfSamples * 5;
    Vol_NT = Vol_NT + 50;
    Vol_ATM = NumberOfSamples * 5;
    Vol_ATM = Vol_ATM + 50;
    Vol_NPM = NumberOfSamples * 15;
    Vol_NPM = Vol_NPM + 50;
    if (NumberOfSamples <= 48)
    {
      Vol_TD = NumberOfSamples * 10;
      Vol_TD = Vol_TD + 50;
      Vol_TD2 = 0;
    }
    else
    {
      Vol_TD = Translate("Full");
      if (NumberOfSamples < 96)
      {
        Vol_TD2 = SamplesMoreThan48 * 10;
        Vol_TD2 = Vol_TD2 + 50;
      }
      else
      {
        Vol_TD2 = Translate("Full");
        Vol_ATM = Translate("Full");
        Vol_NT = Translate("Full");
        Vol_NPM = Translate("Full");
      }
    }
  }
  if (RunProcess2 == 1)
  {
    Vol_AMPure = NumberOfSamples * AMPureVolumePerSample;
    Vol_EtOH80 = NumberOfSamples * 408;
    if (NumberOfSamples > 72)
    {
      Vol_RSB1 = Translate("Full");
      Vol_RSB2 = Translate("Full");
      Vol_RSB3 = Translate("Full");
      if (NumberOfSamples == 96)
      {
        Vol_RSB4 = Translate("Full");
      }
      else
      {
        Vol_RSB4 = SamplesMoreThan72 * 52.5;
        Vol_RSB4 = Vol_RSB4 + 50;
      }
    }
    else
    {
      if (NumberOfSamples > 48)
      {
        Vol_RSB1 = Translate("Full");
        Vol_RSB2 = Translate("Full");
        if (NumberOfSamples == 72)
        {
          Vol_RSB3 = Translate("Full");
        }
        else
        {
          Vol_RSB3 = SamplesMoreThan48 * 52.5;
          Vol_RSB3 = Vol_RSB3 + 50;
        }
        Vol_RSB4 = 0;
      }
      else
      {
        if (NumberOfSamples > 24)
        {
          Vol_RSB1 = Translate("Full");
          if (NumberOfSamples == 48)
          {
            Vol_RSB2 = Translate("Full");
          }
          else
          {
            Vol_RSB2 = SamplesMoreThan24 * 52.5;
            Vol_RSB2 = Vol_RSB2 + 50;
          }
          Vol_RSB3 = 0;
          Vol_RSB4 = 0;
        }
        else
        {
          if (NumberOfSamples == 24)
          {
            Vol_RSB1 = Translate("Full");
          }
          else
          {
            Vol_RSB1 = NumberOfSamples * 52.5;
            Vol_RSB1 = Vol_RSB1 + 50;
          }
          Vol_RSB2 = 0;
          Vol_RSB3 = 0;
          Vol_RSB4 = 0;
        }
      }
    }
  }
  if (RunProcess3 == 1)
  {
    Vol_LNA1_LNB1_Mix = NumberOfSamples * 52;
    Vol_LNS1 = NumberOfSamples * 30;
    Vol_LNS1 = Vol_LNS1 + 50;
    Vol_NaOH = NumberOfSamples * 30;
    if (NumberOfSamples <= 48)
    {
      Vol_LNW1 = NumberOfSamples * 90;
      Vol_LNW1 = Vol_LNW1 + 50;
      Vol_LNW1_mL = Vol_LNW1 / (1000 * 1.0);
      Vol_LNW1_mL = MthRound(Vol_LNW1_mL, 1);
      Vol_LNW1_2 = 0;
    }
    else
    {
      Vol_LNW1_mL = Translate("Full");
      if (NumberOfSamples < 96)
      {
        Vol_LNW1_2 = SamplesMoreThan48 * 90;
        Vol_LNW1_2 = Vol_LNW1_2 + 50;
        Vol_LNW1_2_mL = Vol_LNW1_2 / (1000 * 1.0);
        Vol_LNW1_2_mL = MthRound(Vol_LNW1_2_mL, 1);
      }
      else
      {
        Vol_LNW1_2_mL = Translate("Full");
      }
    }
  }
  if (Vol_AMPure > 0)
  {
    Vol_AMPure_mL = Vol_AMPure / (1000 * 1.0);
    Vol_AMPure_mL = Vol_AMPure_mL + 3;
    Vol_AMPure_mL = MthCeiling(Vol_AMPure_mL);
  }
  if (Vol_EtOH80 > 0)
  {
    Vol_EtOH80_mL = Vol_EtOH80 / (1000 * 1.0);
    Vol_EtOH80_mL = MthCeiling(Vol_EtOH80_mL);
    Trace ("Volume (mL) 80% Ethanol required:  ", Vol_EtOH80_mL);
    if (Vol_EtOH80_mL <= 54)
    {
      MECC::TraceComment(Translate("***** Only need 1 tub of 80% ethanol"));
      EtOH80_TubsRequired = 1;
      Vol_EtOH80_mL_Tub1 = Vol_EtOH80_mL;
    }
    else
    {
      MECC::TraceComment(Translate("***** Need 2 tubs of 80% ethanol"));
      EtOH80_TubsRequired = 2;
      Vol_EtOH80_mL_Tub1 = 54;
      Vol_EtOH80_mL_Tub2 = Vol_EtOH80_mL - 54;
      Vol_EtOH80_mL_Tub2 = MthCeiling(Vol_EtOH80_mL_Tub2);
    }
    if (Vol_EtOH80_mL > 108)
    {
      MECC::TraceComment(Translate("***** Need 3 tubs of 80% ethanol"));
      EtOH80_TubsRequired = 3;
      Vol_EtOH80_mL_Tub2 = 54;
      Vol_EtOH80_mL_Tub3 = Vol_EtOH80_mL - 108;
      Vol_EtOH80_mL_Tub3 = MthCeiling(Vol_EtOH80_mL_Tub3);
    }
    Vol_EtOH80_mL_Tub1 = Vol_EtOH80_mL_Tub1 + 6;
    if (EtOH80_TubsRequired >= 2)
    {
      Vol_EtOH80_mL_Tub2 = Vol_EtOH80_mL_Tub2 + 6;
    }
    if (EtOH80_TubsRequired == 3)
    {
      Vol_EtOH80_mL_Tub3 = Vol_EtOH80_mL_Tub3 + 20;
    }
    Trace ("80% ethanol in tub 1:  ", Vol_EtOH80_mL_Tub1);
    Trace ("80% ethanol in tub 2:  ", Vol_EtOH80_mL_Tub2);
    Trace ("80% ethanol in tub 3:  ", Vol_EtOH80_mL_Tub3);
  }
  if (Vol_LNA1_LNB1_Mix > 0)
  {
    Vol_LNA1_LNB1_Mix_mL = Vol_LNA1_LNB1_Mix / (1000 * 1.0);
    Vol_LNA1_LNB1_Mix_mL = MthRound(Vol_LNA1_LNB1_Mix_mL, 1);
  }
  if (Vol_LNS1 > 0)
  {
    Vol_LNS1_mL = Vol_LNS1 / (1000 * 1.0);
    Vol_LNS1_mL = MthRound(Vol_LNS1_mL, 1);
  }
  if (Vol_NaOH > 0)
  {
    Vol_NaOH_mL = Vol_NaOH / (1000 * 1.0);
    Vol_NaOH_mL = Vol_NaOH_mL + 3;
    Vol_NaOH_mL = MthCeiling(Vol_NaOH_mL);
  }
  if (RunProcess1 == 1)
  {
    NEXTERAXTPREP::SetupIndexLoadDialog(NXTKitConfig);
  }
  customDialog_2.InitCustomDialog("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");
  customDialog_2.SetCustomDialogProperty( "textBlock5.Text", PlatesInStack1 );
  customDialog_2.SetCustomDialogProperty( "textBlock6.Text", PlatesInStack2 );
  customDialog_2.SetCustomDialogProperty( "textBlock7.Text", PlatesInStack3 );
  customDialog_2.SetCustomDialogProperty( "textBlock8.Text", PlatesInStack4 );
  customDialog_2.SetCustomDialogProperty( "textBlock12.Text", Number50Tips );
  customDialog_2.SetCustomDialogProperty( "textBlock13.Text", RacksOf50s );
  customDialog_2.SetCustomDialogProperty( "textBlock16.Text", Number300Tips );
  customDialog_2.SetCustomDialogProperty( "textBlock17.Text", RacksOf300s );
  customDialog_2.SetCustomDialogProperty( "textBlock33.Text", Vol_EtOH80_mL_Tub1 );
  customDialog_2.SetCustomDialogProperty( "textBlock34.Text", Vol_EtOH80_mL_Tub2 );
  customDialog_2.SetCustomDialogProperty( "textBlock35.Text", Vol_EtOH80_mL_Tub3 );
  customDialog_2.SetCustomDialogProperty( "textBlock36.Text", Vol_AMPure_mL );
  customDialog_2.SetCustomDialogProperty( "textBlock41.Text", Vol_LNA1_LNB1_Mix_mL );
  customDialog_2.SetCustomDialogProperty( "textBlock48.Text", Number1000Tips );
  customDialog_2.SetCustomDialogProperty( "textBlock52.Text", Text_Pos3 );
  customDialog_2.SetCustomDialogProperty( "textBlock53.Text", Text_Pos4 );
  customDialog_2.SetCustomDialogProperty( "textBlock54.Text", Text_Pos5 );
  customDialog_2.SetCustomDialogProperty( "textBlock101.Text", Vol_NPM );
  customDialog_2.SetCustomDialogProperty( "textBlock109.Text", NumberOfSamples );
  customDialog_2.SetCustomDialogProperty( "textBlock23.Text", Vol_TD2 );
  customDialog_2.SetCustomDialogProperty( "textBlock25.Text", Vol_TD );
  customDialog_2.SetCustomDialogProperty( "textBlock26.Text", Vol_ATM );
  customDialog_2.SetCustomDialogProperty( "textBlock85.Text", Vol_NT );
  customDialog_2.SetCustomDialogProperty( "textBlock100.Text", Vol_LNW1_mL );
  customDialog_2.SetCustomDialogProperty( "textBlock106.Text", Vol_LNW1_2_mL );
  customDialog_2.SetCustomDialogProperty( "textBlock107.Text", Vol_LNS1_mL );
  customDialog_2.SetCustomDialogProperty( "textBlock113.Text", Vol_NaOH_mL );
  customDialog_2.SetCustomDialogProperty( "textBlock18.Text", Vol_RSB1 );
  customDialog_2.SetCustomDialogProperty( "textBlock38.Text", Vol_RSB2 );
  customDialog_2.SetCustomDialogProperty( "textBlock39.Text", Vol_RSB3 );
  customDialog_2.SetCustomDialogProperty( "textBlock40.Text", Vol_RSB4 );
  customDialog_2.ShowCustomDialog();
  MECC::TraceComment(Translate("********** Submethod Complete:  CalculateResources **********"));
}

function Check_TipQty( sequence & seq_TipsToCheck, variable var_TipsRequired, variable var_TipType ) void {
  private dialog customDialog_3;
  private variable SendEmail;
  private variable StartingTipPosition_1000_Override;
  private variable StartingTipPosition_50_Override;
  private variable StartingTipPosition_300_Override;
  private variable Tips_FirstPosition;
  private variable UserEmailAddress;
  private variable Tips_LastPosition;
  private variable TipsAvailable;
  MECC::TraceComment(Translate("*******************************************************\n********** Submethod:  Check_TipQty **********"));
  NEXTERAXTPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  Tips_FirstPosition = seq_TipsToCheck.GetCurrentPosition();
  Tips_LastPosition = seq_TipsToCheck.GetCount();
  TipsAvailable = Tips_LastPosition - Tips_FirstPosition;
  TipsAvailable = TipsAvailable + 1;
  if (StartingTipPosition_1000_Override == 1)
  {
    if (var_TipType == 1000)
    {
      TipsAvailable = 0;
    }
  }
  if (StartingTipPosition_300_Override == 1)
  {
    if (var_TipType == 300)
    {
      TipsAvailable = 0;
    }
  }
  if (StartingTipPosition_50_Override == 1)
  {
    if (var_TipType == 50)
    {
      TipsAvailable = 0;
    }
  }
  if (Tips_FirstPosition <= 0)
  {
    TipsAvailable = 0;
  }
  Trace ("Tips available:  ", TipsAvailable);
  Trace ("Tips required:  ", var_TipsRequired);
  if (var_TipsRequired > TipsAvailable)
  {
    PTL::ResetUnloadingStateAndSequences();
    PTL::SetUnloadingState("UserResponseTime", 0);
    PTL::SetUnloadingState("ErrorHandling", 3);
    PTL::SetUnloadingSize(1);
    PTL::SetUnloadingSequence(0, seq_TipsToCheck, hslFalse, "");
    if( 0 == PTL::Unload(ML_STAR) )
    {
          PTL::RaiseRuntimeError(-1540095744, PTL::IDS::smartStepUnload, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    PTL::GetUnloadingSequence(0, seq_TipsToCheck);
    customDialog_3.InitCustomDialog("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");
    customDialog_3.SetCustomDialogProperty( "tipType.Text", var_TipType );
    customDialog_3.SetCustomDialogProperty( "textBlock4.Text", var_TipsRequired );
    customDialog_3.ShowCustomDialog();
    if (var_TipType == 50)
    {
      NEXTERAXTPREP::TipCounterRead(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, var_TipsRequired, 0, 0);
      MECC::TraceComment(Translate("***** Load 50ul Tip Carrier *****"));
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      StartingTipPosition_50_Override = 0;
    }
    if (var_TipType == 300)
    {
      NEXTERAXTPREP::TipCounterRead(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0, var_TipsRequired, 0);
      MECC::TraceComment(Translate("***** Load 300ul Tip Carrier *****"));
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      StartingTipPosition_300_Override = 0;
    }
    if (var_TipType == 1000)
    {
      MECC::TraceComment(Translate("***** Load 1ml Tip Carrier *****"));
      NEXTERAXTPREP::TipCounterRead(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0, 0, var_TipsRequired);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      StartingTipPosition_1000_Override = 0;
    }
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    if (SendEmail == 1)
    {
      onerror goto errLabel_4 ;
      err.Clear();
      Util::SendEMail(UserEmailAddress, Translate("Please load more tips"), Translate(""));
      errLabel_4 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        Trace ("Email is not setup correctly!");
      }   /* end if from skip handler if no error */
    }
  }
  {
    Trace (var_TipType, "uL Tips Available = ", TipsAvailable);
    Trace (var_TipType, "uL Tips Needed = ", var_TipsRequired);
  }
  if (TipsAvailable == var_TipsRequired)
  {
    if (var_TipType == 1000)
    {
      StartingTipPosition_1000_Override = 1;
    }
    if (var_TipType == 300)
    {
      StartingTipPosition_300_Override = 1;
    }
    if (var_TipType == 50)
    {
      StartingTipPosition_50_Override = 1;
    }
  }
  MECC::TraceComment(Translate("********** Submethod Complete:  Check_TipQty **********\n******************************************************************"));
}

private function CleanUp( variable var_VolAMPure, variable var_SupDiscardVol, variable var_ResuspensionBuffer, variable var_HSPTransferVol ) void {
  private variable TrackingEthanolVolume_80;
  private variable loopCounter5;
  private timer WaitForMagnet;
  private timer Incubate_RT_2min;
  private timer Incubate_RT;
  private timer EvaporationTime;
  MECC::TraceComment(Translate("******************** SUBMETHOD START:  CLEANUP ********************"));
  MECC::TraceComment(Translate("************* Now transporting new MIDI plate to deck .............."));
  AswStatusDialog::AppendText(Translate("   Transporting new MIDI to deck..."));
  NEXTERAXTPROCESSES::MoveMIDI(ML_STAR, ML_STAR.Stack1, ML_STAR.MIDI_HHS3, 0, 0, 1, GripperMode, GripperSequence);
  SeqIncrement(ML_STAR.Stack1, 1);
  MECC::TraceComment(Translate("************* Now transferring supernatant .............."));
  AswStatusDialog::AppendText(Translate("   Transferring supernatant to MIDI..."));
  NEXTERAXTPROCESSES::Transfer_PlateToPlate(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.HSP_Pipette2, ML_STAR.MIDI_HHS3, 50, Translate("NexteraXT_50F_SampleForCleanup_SurfaceEmpty"), 0, 5);
  NEXTERAXTPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Now pipetting AMPure XP Beads .............."));
  AswStatusDialog::AppendText(Translate("   Pipetting AMPure XP Beads..."));
  NEXTERAXTPROCESSES::Add_AmpureSingle(ML_STAR, ML_STAR._Beads_AMPure, ML_STAR.MIDI_HHS3, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, NumberOfSamples, var_VolAMPure, 1, 1);
  NEXTERAXTPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Now shaking MIDI plate .............."));
  AswStatusDialog::AppendText(Translate("         Shake..."));
  NEXTERAXTPREP::Shake(HHS3, 1800, 120);
  if( 0 == Incubate_RT.SetTimer(300) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("************* Disposing of HSP to Waste .............."));
  AswStatusDialog::AppendText(Translate("   HSP to Waste..."));
  NEXTERAXTPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_Pipette2, ML_STAR.HSP_Waste, 0, 1, GripperMode, GripperSequence);
  Trace ("***** Now incubating HSP at RT for 300s (5min)...");
  AswStatusDialog::AppendText(Translate("   Incubating at RT..."));
  WaitForAndCheckTimer(Incubate_RT);
  MECC::TraceComment(Translate("********** Now move to magnet .............."));
  AswStatusDialog::AppendText(Translate("         Move to magnet..."));
  NEXTERAXTPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS3, ML_STAR.MIDI_OnMagnet, 0, 0, 1, GripperMode, GripperSequence);
  if( 0 == WaitForMagnet.SetTimer(120) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  Trace ("***** Waiting for magnet (120s).......");
  AswStatusDialog::AppendText(Translate("         Wait for magnet..."));
  WaitForAndCheckTimer(WaitForMagnet);
  MECC::TraceComment(Translate("************* Now discarding supernatant .............."));
  AswStatusDialog::AppendText(Translate("   Supernatant to waste..."));
  NEXTERAXTPROCESSES::Transfer_PlatetoWaste(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MIDI_OnMagnet, ML_STAR.LiquidWaste, var_SupDiscardVol, Translate("NexteraXT_SVF_LiquidWaste_JetEmpty"));
  NEXTERAXTPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  {
    for(loopCounter5 = 0; loopCounter5 < 2;)
    {
      loopCounter5 = loopCounter5 + 1;
      AswStatusDialog::AppendText(Translate("         Add ethanol..."));
      NEXTERAXTPROCESSES::Add_Ethanol(ML_STAR, NumberOfSamples, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, ML_STAR._EtOH_80, ML_STAR.MIDI_OnMagnet, Translate("NexteraXT_HVF_80PercentEtOH_JetPart"), TrackingEthanolVolume_80);
      NEXTERAXTPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
      MECC::TraceComment(Translate("********** Remove ethanol supernatant to waste ........"));
      AswStatusDialog::AppendText(Translate("         Remove ethanol..."));
      NEXTERAXTPROCESSES::Transfer_PlatetoWaste(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MIDI_OnMagnet, ML_STAR.LiquidWaste, 200, Translate("NexteraXT_SVF_EthanolSupernatantToWaste_JetEmpty"));
      NEXTERAXTPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
    }
  }
  if( 0 == EvaporationTime.SetTimer(900) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("********** Remove residual ethanol  ........"));
  AswStatusDialog::AppendText(Translate("         Remove residual ethanol..."));
  NEXTERAXTPROCESSES::Remove_ResidualSupernatant(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MIDI_OnMagnet, ML_STAR.LiquidWaste, 20, Translate("NexteraXT_50F_EtOH_JetEmpty"));
  NEXTERAXTPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  Trace ("***** Now waiting for ethanol evaporation.......");
  AswStatusDialog::AppendText(Translate("         Drying..."));
  WaitForAndCheckTimer(EvaporationTime);
  MECC::TraceComment(Translate("********** Now move to RT HHS .............."));
  AswStatusDialog::AppendText(Translate("         Move to shaker..."));
  NEXTERAXTPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_HHS3, 0, 0, 1, GripperMode, GripperSequence);
  MECC::TraceComment(Translate("********** Now pipetting Resuspension Buffer .............."));
  AswStatusDialog::AppendText(Translate("         Add RSB..."));
  NEXTERAXTPROCESSES::Add_RSBFromVial_4Vials(ML_STAR, NumberOfSamples, ML_STAR.XT_RSB, ML_STAR.MIDI_HHS3, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, var_ResuspensionBuffer, Translate("NexteraXT_SVF_RSB_SurfaceEmpty"), 3);
  NEXTERAXTPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Now shaking MIDI plate .............."));
  AswStatusDialog::AppendText(Translate("         Shake..."));
  NEXTERAXTPREP::Shake(HHS3, 1800, 120);
  if( 0 == Incubate_RT_2min.SetTimer(120) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  Trace ("***** Now incubating at RT for 120s .......");
  AswStatusDialog::AppendText(Translate("         Incubating..."));
  WaitForAndCheckTimer(Incubate_RT_2min);
  MECC::TraceComment(Translate("********** Now move to magnet .............."));
  AswStatusDialog::AppendText(Translate("         Move to magnet..."));
  NEXTERAXTPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS3, ML_STAR.MIDI_OnMagnet, 0, 0, 1, GripperMode, GripperSequence);
  if( 0 == WaitForMagnet.SetTimer(120) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("************* Now transporting a new HSP to deck .............."));
  AswStatusDialog::AppendText(Translate("   Transporting new HSP to deck..."));
  NEXTERAXTPROCESSES::MoveHSP(ML_STAR, ML_STAR.Stack4, ML_STAR.HSP_HHS3, TrackToScanBarcode, 1, GripperMode, GripperSequence);
  SeqIncrement(ML_STAR.Stack4, 1);
  Trace ("***** Waiting for magnet (120s).......");
  AswStatusDialog::AppendText(Translate("         Wait for magnet..."));
  WaitForAndCheckTimer(WaitForMagnet);
  MECC::TraceComment(Translate("************* Now transferring clean sample to new HSP .............."));
  AswStatusDialog::AppendText(Translate("   Transferring clean sample to HSP..."));
  NEXTERAXTPROCESSES::Transfer_CleanSample(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MIDI_OnMagnet, ML_STAR.HSP_HHS3, var_HSPTransferVol);
  NEXTERAXTPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Disposing of MIDI to Waste .............."));
  AswStatusDialog::AppendText(Translate("   MIDI to Waste..."));
  NEXTERAXTPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_Waste, 0, 0, 1, GripperMode, GripperSequence);
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE:  CLEANUP ********************"));
}

private function EmailNotify( variable To, variable Subject, variable Body ) void {
  private variable ReturnEmailSuccess;
  MECC::TraceComment(Translate("********** Submethod:  EmailNotify **********"));
  if (EmailNotifyFlag == 1)
  {
    if (SimOn == 0)
    {
      ReturnEmailSuccess = Util::SendEMail(To, Subject, Body);
      Trace ("***** ReturnEmailSuccess:  ", ReturnEmailSuccess);
    }
  }
  MECC::TraceComment(Translate("********** Submethod Complete:  EmailNotify **********"));
}

private function Process1_TagmentPCR(  ) void {
  private dialog dialogHandle_5;
  private dialog dialogHandle_6;
  private dialog dialogHandle_7;
  private dialog dialogHandle_8;
  private variable NumberOfTipsRequired;
  private variable AnswerMoreTips;
  private timer RTInc;
  private timer TAG10_Cool_4min;
  private timer TAG55_Incubation_5min;
  private dialog customDialog_9;
  MECC::TraceComment(Translate("**********************************************************************************************************************************************\n******************** SUBMETHOD START:  PROCESS 1 - TAGMENT AND PCR AMPLIFICATION*************\n**********************************************************************************************************************************************"));
  MECC::TraceComment(Translate("***** START:   TAGMENT*****"));
  AswStatusDialog::Terminate();
  AswStatusDialog::Initialize(Translate("Nextera XT DNA Library Preparation"));
  AswStatusDialog::SetStatusText(Translate("Process 1:  Tagment and PCR Amplification"));
  NumberOfTipsRequired = NumberOfSamples * 4;
  Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 50);
  NEXTERAXTPREP::GetHHSTemperature(HHS1, 55, SimOn);
  if(0){
    NEXTERAXTPREP::CheckCPACTemperature(12, SimOn);
  }
  customDialog_9.InitCustomDialog("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");
  customDialog_9.ShowCustomDialog();
  MECC::TraceComment(Translate("****************************************************************\n************* Now working with the NLTplate..............\n****************************************************************"));
  NEXTERAXTPROCESSES::MoveHSP(ML_STAR, ML_STAR.Stack4, ML_STAR.HSP_HHS3, TrackToScanBarcode, 1, GripperMode, GripperSequence);
  SeqIncrement(ML_STAR.Stack4, 1);
  MECC::TraceComment(Translate("************* Now pipetting TD (Tagment DNA Buffer) .............."));
  AswStatusDialog::AppendText(Translate("   Pipetting TD..."));
  NEXTERAXTPROCESSES::Add_ReagentFromVial(ML_STAR, NumberOfSamples, ML_STAR.XT_TD, ML_STAR.HSP_HHS3, ML_STAR.MlStar50ulTipWithFilter, 10, Translate("NexteraXT_50F_TD_SurfaceEmpty"), 5, 2);
  NEXTERAXTPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Now transferring sample .............."));
  AswStatusDialog::AppendText(Translate("   Transferring samples..."));
  NEXTERAXTPROCESSES::Transfer_PlateToPlate(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.HSP_Pipette, ML_STAR.HSP_HHS3, 5, Translate("NexteraXT_50F_TransferSample_SurfaceEmpty"), 0, 0.2);
  NEXTERAXTPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  NEXTERAXTPREP::Shake(HHS3, 1800, 60);
  MECC::TraceComment(Translate("************* Now pipetting ATM (Amplicon Tagment Mix)  .............."));
  AswStatusDialog::AppendText(Translate("   Pipetting ATM..."));
  NEXTERAXTPROCESSES::Add_ReagentFromVial(ML_STAR, NumberOfSamples, ML_STAR.XT_ATM, ML_STAR.HSP_HHS3, ML_STAR.MlStar50ulTipWithFilter, 5, Translate("NexteraXT_50F_ATM_SurfaceEmpty"), 5, 1);
  NEXTERAXTPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  NEXTERAXTPREP::Shake(HHS3, 1800, 60);
  MECC::TraceComment(Translate("************* Now move NLT to 55C HHS .............."));
  AswStatusDialog::AppendText(Translate("   Move to 55C HHS..."));
  NEXTERAXTPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_HHS3, ML_STAR.HSP_HHS1, 0, 0, GripperMode, GripperSequence);
  if( 0 == TAG55_Incubation_5min.SetTimer(300) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  Trace ("***** Now incubating at 55C for 300s (5min)...");
  AswStatusDialog::AppendText(Translate("   Incubating at 55C..."));
  WaitForAndCheckTimer(TAG55_Incubation_5min);
  MECC::TraceComment(Translate("************* Now move NLT to CPAC .............."));
  AswStatusDialog::AppendText(Translate("   Move to CPAC..."));
  NEXTERAXTPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_HHS1, ML_STAR.HSP_CPAC, 0, 0, GripperMode, GripperSequence);
  if( 0 == TAG10_Cool_4min.SetTimer(240) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  NEXTERAXTPREP::SetHHSTemperature(HHS1, 0);
  WaitForAndCheckTimer(TAG10_Cool_4min);
  MECC::TraceComment(Translate("************* Now move NLT to RT HHS .............."));
  AswStatusDialog::AppendText(Translate("   Move to RT HHS..."));
  NEXTERAXTPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_CPAC, ML_STAR.HSP_HHS3, 0, 0, GripperMode, GripperSequence);
  if (SimOn == 0)
  {
    NEXTERAXTPREP::StopCPACTempControl();
  }
  MECC::TraceComment(Translate("************* Now pipetting NT (Neutralize Tagment Buffer)  .............."));
  AswStatusDialog::AppendText(Translate("   Pipetting NT..."));
  NEXTERAXTPROCESSES::Add_ReagentFromVial(ML_STAR, NumberOfSamples, ML_STAR.XT_NT, ML_STAR.HSP_HHS3, ML_STAR.MlStar50ulTipWithFilter, 5, Translate("NexteraXT_50F_NT_SurfaceEmpty"), 5, 1);
  NEXTERAXTPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  NEXTERAXTPREP::Shake(HHS3, 1800, 60);
  if( 0 == RTInc.SetTimer(300) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("************* Now incubating at RT for 5min .............."));
  AswStatusDialog::AppendText(Translate("   Incubate at RT..."));
  WaitForAndCheckTimer(RTInc);
  MECC::TraceComment(Translate("***** AMPLIFY TAGMENTED DNA *****"));
  MECC::TraceComment(Translate("************* Now pipetting Indexes .............."));
  NumberOfTipsRequired = NumberOfSamples * 3;
  Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 50);
  AswStatusDialog::AppendText(Translate("   Pipetting adapters..."));
  NEXTERAXTPROCESSES::Add_IndexesViaVials(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.IndexVials_UniquePerRun, ML_STAR.HSP_HHS3, NumberOfIndexes, array_Index1Positions, array_Index2Positions, array_PCRPositions);
  NEXTERAXTPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Now pipetting NPM (Nextera PCR Master Mix) .............."));
  AswStatusDialog::AppendText(Translate("   Pipetting NPM..."));
  NEXTERAXTPROCESSES::Add_ReagentFromVial(ML_STAR, NumberOfSamples, ML_STAR.XT_NPM, ML_STAR.HSP_HHS3, ML_STAR.MlStar50ulTipWithFilter, 15, Translate("NexteraXT_50F_NPM_SurfaceEmpty"), 5, 1);
  NEXTERAXTPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Now shaking plate .............."));
  AswStatusDialog::AppendText(Translate("   Shaking..."));
  NEXTERAXTPREP::Shake(HHS3, 1200, 60);
  NEXTERAXTPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_HHS3, ML_STAR.HSP_Pipette2, 0, 1, GripperMode, GripperSequence);
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  dialogHandle_5.SetOutput(Translate("Seal the PCR plate and place in thermal cycler"), Translate("\n\nRemove the plate of normalized gDNA"), Translate("\n\nRun program 'NLM AMP' on PCR plate"));
  dialogHandle_5.ShowOutput(Translate("Unload PCR plate for thermal cycling"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  dialogHandle_7.SetOutput(Translate("Do you want to reload tips at this time?"));
  AnswerMoreTips = dialogHandle_7.ShowOutput(Translate("More tips?"), hslYesNo | hslInformation | hslDefButton1, 300);
  if (AnswerMoreTips == 6)
  {
    AswStatusDialog::AppendText(Translate("   Adding more tips..."));
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    dialogHandle_8.SetOutput(Translate("Please fill the unloaded carriers with the appropriate kind of tips."), Translate("\nThen click OK to have the filled carriers reloaded onto the deck."), Translate("\n\nThis may also be a good time to check/empty the tip waste."));
    dialogHandle_8.ShowOutput(Translate("Replenish Tips"), hslOKOnly | hslExclamation | hslDefButton1, hslInfinite);
    NEXTERAXTPREP::TipCounterRead(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 96, 96, 0);
    NEXTERAXTPREP::GenerateTipCarrierBarcodeStrings(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, TipCarBCsToCheck_50_2, TipCarBCsToCheck_50_1, TipCarBCsToCheck_300_2, TipCarBCsToCheck_300_1, PlateCarBCsToCheck_PCR);
    if (TipCarBCsToCheck_50_2 != "")
    {
      Trace ("Tip rack positions to check on TIP_CAR_480BC_TIP_50F_2:  ", TipCarBCsToCheck_50_2);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    if (TipCarBCsToCheck_50_1 != "")
    {
      Trace ("Tip rack positions to check on TIP_CAR_480BC_TIP_50F_1:  ", TipCarBCsToCheck_50_1);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    if (TipCarBCsToCheck_300_2 != "")
    {
      Trace ("Tip rack positions to check on TIP_CAR_480BC_STF_2:  ", TipCarBCsToCheck_300_2);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    if (TipCarBCsToCheck_300_1 != "")
    {
      Trace ("Tip rack positions to check on TIP_CAR_480BC_TIP_STF_1:  ", TipCarBCsToCheck_300_1);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  AswStatusDialog::AppendText(Translate("      Process 1 Complete."));
  if (AnswerStopPoint == 1)
  {
    MECC::TraceComment(Translate("************************** Stopping Point:  Amplification of Tagmented DNA now complete **************************"));
  }
  else
  {
    dialogHandle_6.SetOutput(Translate("Replace the plate on position 3 of the unloaded carrier (Track 35) and click 'OK'"), "\n", Translate(""), "\n", Translate("Remember to remove the seal before continuing!"));
    dialogHandle_6.ShowOutput(Translate("Continue Method"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  }
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE:  PROCESS 1 - TAGMENT AND PCR AMPLIFICATION ********************"));
}

private function Process2_Cleanup(  ) void {
  private dialog dialogHandle_10;
  private dialog dialogHandle_11;
  private dialog dialogHandle_12;
  private variable RemoveSupernatantVolume;
  private variable NumberOfTipsRequired;
  private variable AnswerMoreTips;
  MECC::TraceComment(Translate("*************************************************************************************************************************\n******************** SUBMETHOD START:  PROCESS 2 - PCR CLEAN UP ********************\n*************************************************************************************************************************"));
  MECC::TraceComment(Translate("***** START:   PCR CLEAN UP *****"));
  AswStatusDialog::Terminate();
  AswStatusDialog::Initialize(Translate("Nextera XT DNA Library Preparation"));
  AswStatusDialog::SetStatusText(Translate("Process 2:  PCR Clean Up 1"));
  NumberOfTipsRequired = NumberOfSamples * 3;
  Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 50);
  NumberOfTipsRequired = NumberOfSamples * 5;
  Check_TipQty(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, NumberOfTipsRequired, 300);
  NumberOfTipsRequired = 16;
  Check_TipQty(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, NumberOfTipsRequired, 1000);
  RemoveSupernatantVolume = AMPureVolumePerSample + 50;
  CleanUp(AMPureVolumePerSample, RemoveSupernatantVolume, 52.5, 50);
  AswStatusDialog::AppendText(Translate("      Process 2 Complete."));
  dialogHandle_11.SetOutput(Translate("Do you want to reload tips at this time?"));
  AnswerMoreTips = dialogHandle_11.ShowOutput(Translate("More tips?"), hslYesNo | hslInformation | hslDefButton1, 300);
  if (AnswerMoreTips == 6)
  {
    AswStatusDialog::AppendText(Translate("   Adding more tips..."));
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    dialogHandle_12.SetOutput(Translate("Please fill the unloaded carriers with the appropriate kind of tips."), Translate("\nThen click OK to have the filled carriers reloaded onto the deck."), Translate("\n\nThis may also be a good time to check/empty the tip waste."));
    dialogHandle_12.ShowOutput(Translate("Replenish Tips"), hslOKOnly | hslExclamation | hslDefButton1, hslInfinite);
    NEXTERAXTPREP::TipCounterRead(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 96, 96, 0);
    NEXTERAXTPREP::GenerateTipCarrierBarcodeStrings(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, TipCarBCsToCheck_50_2, TipCarBCsToCheck_50_1, TipCarBCsToCheck_300_2, TipCarBCsToCheck_300_1, PlateCarBCsToCheck_PCR);
    if (TipCarBCsToCheck_50_2 != "")
    {
      Trace ("Tip rack positions to check on TIP_CAR_480BC_TIP_50F_2:  ", TipCarBCsToCheck_50_2);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    if (TipCarBCsToCheck_50_1 != "")
    {
      Trace ("Tip rack positions to check on TIP_CAR_480BC_TIP_50F_1:  ", TipCarBCsToCheck_50_1);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    if (TipCarBCsToCheck_300_2 != "")
    {
      Trace ("Tip rack positions to check on TIP_CAR_480BC_STF_2:  ", TipCarBCsToCheck_300_2);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    if (TipCarBCsToCheck_300_1 != "")
    {
      Trace ("Tip rack positions to check on TIP_CAR_480BC_TIP_STF_1:  ", TipCarBCsToCheck_300_1);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
  if (AnswerStopPoint == 2)
  {
    MECC::TraceComment(Translate("************************** Stopping Point:  PCR Cleanup now complete **************************"));
    NEXTERAXTPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_HHS3, ML_STAR.HSP_Pipette, 0, 1, GripperMode, GripperSequence);
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    dialogHandle_10.SetOutput(Translate("Seal the PCR plate and take it for quantification."), "\n", Translate("Click OK to proceed."));
    dialogHandle_10.ShowOutput(Translate("Unload PCR plate for quantification"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  else
  {
    NEXTERAXTPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_HHS3, ML_STAR.HSP_Pipette, 0, 0, GripperMode, GripperSequence);
  }
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE:  PROCESS 2 - PCR CLEAN UP ********************"));
}

private function Process3_NormalizePool(  ) void {
  private dialog dialogHandle_13;
  private dialog dialogHandle_14;
  private variable loopCounter2;
  private variable NumberOfTipsRequired;
  private timer WaitForMagnet;
  private dialog customDialog_15;
  private dialog customDialog_16;
  private dialog customDialog_17;
  private dialog customDialog_18;
  private dialog customDialog_19;
  MECC::TraceComment(Translate("***********************************************************************************************************************************************************\n******************** SUBMETHOD START:  PROCESS 3 - NORMALIZATION AND POOLING ********************\n***********************************************************************************************************************************************************"));
  MECC::TraceComment(Translate("***** START:   NORM/POOLING *****"));
  AswStatusDialog::Terminate();
  AswStatusDialog::Initialize(Translate("Nextera XT DNA Library Preparation"));
  AswStatusDialog::SetStatusText(Translate("Process 3: Normalize and Pool"));
  NumberOfTipsRequired = NumberOfSamples * 2;
  Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 50);
  if(0){
    customDialog_15.InitCustomDialog("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");
    customDialog_15.ShowCustomDialog();
  }
  NumberOfTipsRequired = NumberOfSamples * 1;
  Check_TipQty(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, NumberOfTipsRequired, 300);
  Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, 1, 1000);
  MECC::TraceComment(Translate("************* Now transporting a new MIDI to deck .............."));
  AswStatusDialog::AppendText(Translate("   Transporting new MIDI to deck..."));
  customDialog_18.InitCustomDialog("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");
  customDialog_18.ShowCustomDialog();
  NEXTERAXTPROCESSES::MoveMIDI(ML_STAR, ML_STAR.Stack1, ML_STAR.MIDI_HHS3, 0, 0, 1, GripperMode, GripperSequence);
  MECC::TraceComment(Translate("************* Now transferring cleaned libraries to MIDI .............."));
  AswStatusDialog::AppendText(Translate("   Transfer cleaned libraries to MIDI..."));
  NEXTERAXTPROCESSES::Transfer_PlateToPlate(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.HSP_Pipette, ML_STAR.MIDI_HHS3, 20, Translate("NexteraXT_50F_CleanSample_SurfaceEmpty"), 0, 0.2);
  if(0){
    customDialog_17.InitCustomDialog("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");
    customDialog_17.ShowCustomDialog();
  }
  NEXTERAXTPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Now adding LNA1/LNB1 mix .............."));
  AswStatusDialog::AppendText(Translate("   Add LNA1/LNB1..."));
  NEXTERAXTPROCESSES::Add_BeadsFromVial_96samples_per_vial(ML_STAR, NumberOfSamples, ML_STAR.LNA1_LNB1_Mix, ML_STAR.MIDI_HHS3, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, ML_STAR.MlStar50ulTipWithFilter, 45, Translate("NexteraXT_HVF_LNA1_LNB1_Premix_SurfaceEmpty"), Translate("NexteraXT_50F_LNA1_LNB1_MasterMix_SurfaceEmpty"));
  NEXTERAXTPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Now shaking for 1800s (30min) at room temperature .............."));
  if(0){
    customDialog_16.InitCustomDialog("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");
    customDialog_16.ShowCustomDialog();
  }
  AswStatusDialog::AppendText(Translate("   Shake for 30min..."));
  NEXTERAXTPREP::Shake(HHS3, 1800, 1800);
  MECC::TraceComment(Translate("************* Now moving MIDI to magplate .............."));
  AswStatusDialog::AppendText(Translate("   Move MIDI to magplate..."));
  NEXTERAXTPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS3, ML_STAR.MIDI_OnMagnet, 0, 0, 0, GripperMode, GripperSequence);
  if( 0 == WaitForMagnet.SetTimer(120) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("************* Now transporting a new HSP to deck .............."));
  AswStatusDialog::AppendText(Translate("   Transporting new HSP to deck..."));
  NEXTERAXTPROCESSES::MoveHSP(ML_STAR, ML_STAR.Stack4, ML_STAR.HSP_Pipette2, TrackToScanBarcode, 1, GripperMode, GripperSequence);
  SeqIncrement(ML_STAR.Stack4, 1);
  Trace ("***** Waiting for magnet (120s).......");
  AswStatusDialog::AppendText(Translate("   Wait for magnet..."));
  WaitForAndCheckTimer(WaitForMagnet);
  MECC::TraceComment(Translate("************* Now discarding supernatant .............."));
  AswStatusDialog::AppendText(Translate("   Discarding supernatant..."));
  NEXTERAXTPROCESSES::Transfer_PlatetoWaste(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MIDI_OnMagnet, ML_STAR.LiquidWaste, 65, Translate("NexteraXT_SVF_SupernatantToWaste_JetEmpty"));
  NEXTERAXTPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  NEXTERAXTPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_HHS3, 0, 0, 1, GripperMode, GripperSequence);
  NumberOfTipsRequired = NumberOfSamples * 4;
  Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 50);
  {
    for(loopCounter2 = 0; loopCounter2 < 2;)
    {
      loopCounter2 = loopCounter2 + 1;
      if (loopCounter2 == 1)
      {
        AswStatusDialog::AppendText(Translate("   ...LNW1 Wash Cycle 1 of 2"));
      }
      else
      {
        AswStatusDialog::AppendText(Translate("   ...LNW1 Wash Cycle 2 of 2"));
      }
      MECC::TraceComment(Translate("************* Now adding LNW1 (Library Normalization Wash 1) .............."));
      AswStatusDialog::AppendText(Translate("         Pipetting LNW1..."));
      NEXTERAXTPROCESSES::Add_WashBuffer(ML_STAR, NumberOfSamples, ML_STAR.LNW1, ML_STAR.MIDI_HHS3, ML_STAR.MlStar50ulTipWithFilter, 45, Translate("NexteraXT_50F_LNW1_SurfaceEmpty"), 5);
      NEXTERAXTPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
      NEXTERAXTPREP::Shake(HHS3, 1800, 300);
      NEXTERAXTPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS3, ML_STAR.MIDI_OnMagnet, 0, 0, 1, GripperMode, GripperSequence);
      if( 0 == WaitForMagnet.SetTimer(120) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      Trace ("***** Waiting for magnet (120s).......");
      AswStatusDialog::AppendText(Translate("         Wait for magnet..."));
      WaitForAndCheckTimer(WaitForMagnet);
      MECC::TraceComment(Translate("************* Now discarding supernatant .............."));
      AswStatusDialog::AppendText(Translate("         Discarding supernatant..."));
      NEXTERAXTPROCESSES::Transfer_PlatetoWaste(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MIDI_OnMagnet, ML_STAR.LiquidWaste, 45, Translate("NexteraXT_50F_LiquidWaste_JetEmpty"));
      NEXTERAXTPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
      if (loopCounter2 == 1)
      {
        NEXTERAXTPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_HHS3, 0, 0, 1, GripperMode, GripperSequence);
      }
    }
  }
  if(0){
    MECC::TraceComment(Translate("************* Now removing residual supernatant .............."));
    AswStatusDialog::AppendText(Translate("         Removing residual supernatant..."));
    NEXTERAXTPROCESSES::Remove_ResidualSupernatant(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MIDI_OnMagnet, ML_STAR.LiquidWaste, 20, Translate("NexteraXT_50F_LiquidWaste_JetEmpty"));
  }
  NEXTERAXTPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_HHS3, 0, 0, 1, GripperMode, GripperSequence);
  NumberOfTipsRequired = NumberOfSamples * 3;
  Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 50);
  MECC::TraceComment(Translate("************* Now adding 0.1N NaOH .............."));
  AswStatusDialog::AppendText(Translate("   Pipetting NaOH..."));
  NEXTERAXTPROCESSES::Add_NaOH(ML_STAR, ML_STAR._NaOH, ML_STAR.MIDI_HHS3, ML_STAR.MlStar50ulTipWithFilter, 30, 5);
  NEXTERAXTPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("************* Now shaking beads with NaOH on RT HHS .............."));
  AswStatusDialog::AppendText(Translate("   Shaking beads..."));
  MECC::TraceComment(Translate("************* Now pipetting LNS1 (Library Normalization Storage Buffer 1) to new HSP .............."));
  AswStatusDialog::AppendText(Translate("   Pipette LNS1 to HSP..."));
  NEXTERAXTPROCESSES::Shake_ParallelProcessing(ML_STAR, HHS3, 1800, 600, NumberOfSamples, ML_STAR.LNS1, ML_STAR.HSP_Pipette2, ML_STAR.MlStar50ulTipWithFilter, 30, Translate("NexteraXT_50F_LNS1_SurfaceEmpty"), 5, 1);
  NEXTERAXTPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  NEXTERAXTPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS3, ML_STAR.MIDI_OnMagnet, 0, 0, 0, GripperMode, GripperSequence);
  if( 0 == WaitForMagnet.SetTimer(120) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  NEXTERAXTPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_Pipette2, ML_STAR.HSP_HHS3, 0, 1, GripperMode, GripperSequence);
  Trace ("***** Waiting for magnet (120s).......");
  AswStatusDialog::AppendText(Translate("         Wait for magnet..."));
  WaitForAndCheckTimer(WaitForMagnet);
  MECC::TraceComment(Translate("************* Now transferring normalized libraries to new HSP .............."));
  AswStatusDialog::AppendText(Translate("   Transferring normalized libraries to HSP..."));
  NEXTERAXTPROCESSES::Transfer_PlateToPlate(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MIDI_OnMagnet, ML_STAR.HSP_HHS3, 30, Translate("NexteraXT_50F_CleanSample_SurfaceEmpty"), 0, 0.5);
  NEXTERAXTPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  NEXTERAXTPREP::Shake(HHS3, 1800, 60);
  NEXTERAXTPROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_Waste, 0, 0, 0, GripperMode, GripperSequence);
  if (AnswerPooling > 0)
  {
    NumberOfTipsRequired = NumberOfSamples * 1;
    Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 50);
    MECC::TraceComment(Translate("************* Now transporting a new HSP to deck .............."));
    AswStatusDialog::AppendText(Translate("   Transporting new HSP to deck..."));
    customDialog_19.InitCustomDialog("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");
    customDialog_19.ShowCustomDialog();
    NEXTERAXTPROCESSES::MoveHSP(ML_STAR, ML_STAR.Stack4, ML_STAR.HSP_Pipette2, 0, 0, GripperMode, GripperSequence);
    NEXTERAXTPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.Stack4, 0, 0, GripperMode, GripperSequence);
    NEXTERAXTPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_HHS3, ML_STAR.HSP_Pipette, 0, 0, GripperMode, GripperSequence);
    MECC::TraceComment(Translate("************* Now transferring normalized libraries to pooling plate .............."));
    AswStatusDialog::AppendText(Translate("   Pooling libraries..."));
    NEXTERAXTPROCESSES::Pool(ML_STAR, ML_STAR.HSP_HHS3, ML_STAR.HSP_Pool, ML_STAR.MlStar50ulTipWithFilter, 5, 5);
    NEXTERAXTPREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
    dialogHandle_13.SetOutput(Translate("Take pooling plate (position 3 of the plate-tip carrier) and prepare for sequencing."), Translate("\n\nThe normalized libraries are present in the plate on position 4 of the plate tip carrier."), Translate("\n\nCleaned libraries are present in stack 4 of the plate stack carrier."), Translate("\n\nClick 'OK' to unload all carriers."));
    dialogHandle_13.ShowOutput(Translate("Normalization and Pooling Complete"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  else
  {
    NEXTERAXTPROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_HHS3, ML_STAR.HSP_Pipette2, 0, 0, GripperMode, GripperSequence);
    dialogHandle_14.SetOutput(Translate("The normalization plate is in position 3 of the plate-tip carrier."), Translate("\n\nThe cleaned libraries are presnet in position 4 of the plate-tip carrier."), Translate("\n\nClick 'OK' to unload all carriers."));
    dialogHandle_14.ShowOutput(Translate("Normalizationm Complete"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  if (AnswerStopPoint == 3)
  {
    MECC::TraceComment(Translate("************************** Stopping Point:  Normalize and Pooling now complete **************************"));
  }
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE:  PROCESS 3 - NORMALIZATION AND POOLING ********************"));
}

private function WaitForAndCheckTimer( timer & IncubationTimer ) void {
  private variable TimerWasStopped;
  private variable ActualElapsedTime;
  Trace ("**********************************");
  Trace ("***** Waiting for timer........");
  Trace ("**********************************");
  TimerWasStopped = IncubationTimer.WaitTimer(hslTrue, hslTrue);
  if (0 == TimerWasStopped)
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if (TimerWasStopped == 3)
  {
    MECC::TraceComment(Translate("***** WARNING!  The timer was stopped prematurely! *****"));
  }
  ActualElapsedTime = IncubationTimer.GetElapsedTime();
  Trace ("***** Actual Elapsed Time (seconds):  ", ActualElapsedTime, "        *****");
}

private function _VersionHistory(  ) void {
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  Nextera XT DNA Library Preparation\nBy:          Randy Pares, Hamilton Company, Reno, NV\nDate:      August 21, 2017\nVersion:  3.1\n\nBased on Illumina's Nextera XT DNA Library Preparation Reference Guide (part # 15031942 v01)\n\nVersion Notes:\n1. Bug fix - updated load carrier steps to reflect carriers being used in those processes being run\n2. Bug fix - Process 3, corrected SPG plate is now moved to HHS3 instead of cleaned library plate on final normalization elution step\n3. Updated deck layout to v3.0, RSB is now in 2ml cryovials instead of trough\n4. Updated RSB volume calculation\n\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  Nextera XT DNA Library Preparation\nBy:          Randy Pares, Hamilton Company, Reno, NV\nDate:      November 16, 2016\nVersion:  3.0.0\n\nBased on Illumina's Nextera XT DNA Library Preparation Reference Guide (part # 15031942 v01)\n\nVersion Notes:\n1. Modified method written by Adan Orta to fit the NGS Standard Solution format\n2. Put Normalization and Pooling method into the same submethod, but made Pooling optional\n3. Updated method from rev C (used for A. Orta's scripted method) to v01 of Nextera XT reference guide\n4. Changed base liquid classes for LNA1/LNB1 master mix and LNW1 to those used in TruSight Tumor 170 developed by Randy Pares\n\n*************************************************************************************************************************************"));
}
