 namespace _Method { #include "HSLML_STARLib.hsl" }
  namespace _Method { #include "ASWStandard\\TraceLevel\\TraceLevel.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLDevLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLUtilLib2.hsl" }
 namespace _Method { #include "LVK\\HSLLVKService.hsl" }
 namespace _Method { #include "ASWStandardDialogs\\ASWStandardDialogs.hsl" }
 namespace _Method { #include "Hamilton Mettler Toledo WXS\\Hamilton Mettler Toledo WXS.hsl" }
 namespace _Method { #include "HSLMappingReport.hsl" }
 namespace _Method { #include "HSLTimLib.hsl" }
 namespace _Method { #include "HSLStatistics.hsl" }
 namespace _Method { #include "HSL_LiquidClassLib.hsl" }
 namespace _Method { #include "HslUtilLib.hsl" }
#include "LVK\\Liquid Class Verification Deck_MLStarlet.res"
variable aspVolume;
variable tipCounter;
variable channelPattern_AllChannels;
variable myTipType;
variable liquidType;
variable glSimulationCheck;
variable numActiveChannels;
variable xml_ADC;
variable xml_disp_preVolume;
variable xml_disp_pLLD;
variable xml_asp_postVolume;
variable xml_tipSize;
variable xml_temperature;
variable xml_liquidClass;
variable xml_humidity;
variable xml_disp_fixedHeight;
variable xml_asp_volume;
variable xml_liquidDensity;
variable xml_disp_mixVolume;
variable xml_disp_mixCycles;
variable xml_disp_postVolume;
variable xml_disp_volume;
variable xml_asp_cLLD;
variable xml_cycleCount;
variable xml_asp_preVolume;
variable xml_asp_fixedHeight;
variable xml_deviceIndex;
variable xml_dispenseCycles;
variable xml_asp_pLLD;
variable xml_asp_mixVolume;
variable xml_asp_mixCycles;
variable xml_reUseTips;
variable xml_disp_mixDepth;
variable xml_disp_cLLD;
variable xml_asp_mixDepth;
variable xml_device;
variable xml_preDispenseCycles;
variable xml_postDispenseCycles;
variable xml_keepTips;
variable xml_returnTips;
variable pipettingTool;
sequence _tips;
variable dispenseType_PartEmpty;
variable dispenseType_JetSurface;
variable xml_developValidation_cycleCount;
global variable testMode;
global variable tipsOn;
variable channelPattern;
variable startingTipsPosition_Run;
variable startingTipsPosition_Channel;
variable myTipID;
sequence _tips_50uLFilter;
sequence _tips_4mLFilter;
sequence _tips_HighVolumeFilter;
sequence _tipAdapter96_50uLFilter;
sequence _tips_5mL;
sequence _tips_StandardVolumeFilter;
sequence _tips_HighVolume;
sequence _tipAdapter96_50uL;
sequence _tips_LowVolumeFilter;
sequence _tips_50uL;
sequence _tipAdapter96_HighVolume;
sequence _tipAdapter96_StandardVolumeFilter;
sequence _tipAdapter96_HighVolumeFilter;
sequence _tipAdapter96_StandardVolume;
sequence _tips_StandardVolume;
sequence _tips_LowVolume;
sequence _tipAdapter96;
variable tipCounter_adapter96;
variable tipPicFilename;
variable unloadTipAdapterPicFilename;
variable loadTipAdapterPicFilename;
variable labIDOfEmptyTipRack96InCarrier;
variable safeMPHPicFilename;
global sequence tempTips;
variable loadPlatePicFilename;
variable loadVialPicFilename;
variable x;
variable y;
variable z;
variable a;
variable wastePicFilename;
variable tipAdapterPicFilename;
variable tipRacksPicFilename;
variable file_lastTipPickup96;
variable balance_COMPort;
variable developmentModeCycleCounter;
variable balanceContainer;
sequence _tips_WideBore1mL_12mm;
variable arrayDevMeasures[];
global variable tmpDevLiqClassExcel;
global variable tmpDevLiqClassExcel_ThisRunOnly;
variable vialTypeString;
variable comPortString;
global device ML_STAR ("LVK\\Liquid Class Verification Deck_MLStarlet.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    MthURandInit(0.03, 0.08);
    LVK::Connect();
    balance_COMPort = 1;
    comPortString = LVK::COMPort();
    balance_COMPort = StrIVal(comPortString);
    balanceContainer = 1;
    vialTypeString = LVK::VialType();
    balanceContainer = StrIVal(vialTypeString);
    AswStandardDialogs::Initialize();
    RetrieveLVKParameters();
    Init_Instruments();
    Init_Balance(ML_STAR);
    Definitions();
    if (pipettingTool == 1)
    {
      AswStandardDialogs::MessageDialogWithImage(Translate("Balance setup instructions"), AswStandardDialogs::IconType::Information, AswStandardDialogs::ButtonType::Ok, 0, 0, 0, Translate(" Please load the balance, vial and shield as instructed "), loadVialPicFilename, 800);
      EditTips_Channels();
      Pipette_1mLChannels();
    }
    if (pipettingTool == 2)
    {
      AswStandardDialogs::MessageDialogWithImage(Translate("Balance setup instructions"), AswStandardDialogs::IconType::Information, AswStandardDialogs::ButtonType::Ok, 0, 0, 0, Translate(" Please load the balance, plate WITH LIQUID ON H12 and shield as instructed "), loadPlatePicFilename, 800);
      EditTips_Head(1);
      Pipette_96Head();
    }
    if (pipettingTool == 7)
    {
      AswStandardDialogs::MessageDialogWithImage(Translate("Balance setup instructions"), AswStandardDialogs::IconType::Information, AswStandardDialogs::ButtonType::Ok, 0, 0, 0, Translate(" Please load the balance, vial and shield as instructed "), loadVialPicFilename, 800);
      EditTips_Channels();
      Pipette_1mLChannels();
    }
    TerminateAll();
  } }
