private function A_Setup_TipSequences(  ) void ;
private function CreatePattern_OneChannel( variable i_TotalNumberOfChannelsInstalled, variable i_ChannelOfInterest, variable & o_ChannelPattern ) void ;
private function CreateSinglechnPatternsArray_FromChnPatternAll( variable i_ChannelPattern, variable & o_NumberOfActiveChannels, variable & o_arraySingleChannelPatterns[] ) void ;
private function Definitions(  ) void ;
private function EditTips_Channels(  ) void ;
private function EditTips_DiscardTipsInTipAdapter( variable tipAdapterType ) void ;
private function EditTips_Head( variable isFirstEdit ) void ;
private function EjectTips(  ) void ;
private function EjectTips_5mL(  ) void ;
private function EjectTips_96(  ) void ;
private function GenerateRandomMeasure( variable & weightMeasured ) void ;
private function GetChannelIndexFromPattern( variable i_ChannelPattern, variable & chnIndex ) void ;
private function GetTipTypeName( variable tipTypeCode, variable & tipTypeString ) void ;
private function HandleReturnValue( variable i_blnSuccess, variable i_strFunctionName ) void ;
function Init_Balance( device & ML_STAR ) void ;
private function Init_Instruments(  ) void ;
function Measure_Balance( variable & o_weight ) void ;
private function Pipette_1mLChannels(  ) void ;
private function Pipette_5mLChannels(  ) void ;
private function Pipette_96Head(  ) void ;
private function RecordWeightForDevelopment( variable pipettingCycle, variable dispenseNumber, variable volume, variable weight, variable channel ) void ;
private function ReportMeasuredData( variable weightMeasured, variable channelNumber, variable dispenseCycle, variable cycleCount ) void ;
private function RetrieveLVKParameters(  ) void ;
private function RollBack_LiquidClassChanges(  ) void ;
private function TerminateAll(  ) void ;
function Zero_Balance(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  TerminateAll();
}

private function Definitions(  ) void {
  private variable myDispenseMode;
  private variable strFound;
  private variable str;
  private variable systemPath;
  private variable balanceContainerText;
  private variable logFilesPath;
  private variable runStartDate;
  private variable time;
  LiquidClassLib::Initialize(ML_STAR, 0);
  LiquidClassLib::SelectLiquidClass(xml_liquidClass);
  myDispenseMode = LiquidClassLib::GetLiquidClassParameter(LiquidClassLib::LIQUIDCLASS_PARAMS::DispenseMode);
  liquidType = LiquidClassLib::GetLiquidClassParameter(LiquidClassLib::LIQUIDCLASS_PARAMS::LiquidName);
  myTipID = LiquidClassLib::GetLiquidClassParameter(LiquidClassLib::LIQUIDCLASS_PARAMS::TipType);
  if (myDispenseMode == 2)
  {
    dispenseType_JetSurface = Translate("Jet");
    dispenseType_PartEmpty = Translate("Part");
  }
  else
  {
    if (myDispenseMode == 3)
    {
      dispenseType_JetSurface = Translate("Jet");
      dispenseType_PartEmpty = Translate("Empty");
    }
    else
    {
      if (myDispenseMode == 4)
      {
        dispenseType_JetSurface = Translate("Surface");
        dispenseType_PartEmpty = Translate("Part");
      }
      else
      {
        if (myDispenseMode == 5)
        {
          dispenseType_JetSurface = Translate("Surface");
          dispenseType_PartEmpty = Translate("Empty");
        }
      }
    }
  }
  GetTipTypeName(myTipID, myTipType);
  Trace("dispense Mode=" , myDispenseMode , "=", dispenseType_JetSurface, " " , dispenseType_PartEmpty);
  if (dispenseType_JetSurface == "Jet")
  {
    xml_disp_cLLD = 0;
    xml_disp_pLLD = 0;
    xml_disp_mixCycles = 0;
    xml_disp_mixDepth = 0;
    xml_disp_mixVolume = 0;
  }
  if (dispenseType_PartEmpty == "Part")
  {
    xml_disp_mixCycles = 0;
    xml_disp_mixDepth = 0;
    xml_disp_mixVolume = 0;
  }
  if (dispenseType_PartEmpty == "Empty")
  {
    xml_dispenseCycles = 1;
    xml_preDispenseCycles = 0;
    xml_postDispenseCycles = 0;
    xml_asp_volume = xml_disp_volume;
  }
  str = StrMakeLowerCopy(xml_device);
  strFound = StrFind(str, Translate("1ml"));
  if (strFound >= 0)
  {
    pipettingTool = 1;
  }
  strFound = StrFind(str, Translate("5ml"));
  if (strFound >= 0)
  {
    pipettingTool = 7;
  }
  strFound = StrFind(str, Translate("96"));
  if (strFound >= 0)
  {
    pipettingTool = 2;
  }
  strFound = StrFind(str, Translate("384"));
  if (strFound >= 0)
  {
    pipettingTool = 8;
  }
  A_Setup_TipSequences();
  if (myTipID == 0)
  {
    SeqCopySequence(_tips, _tips_StandardVolume);
    tipCounter = Translate("LCDev_StdTips");
  }
  if (myTipID == 1)
  {
    SeqCopySequence(_tips, _tips_StandardVolumeFilter);
    tipCounter = Translate("LCDev_StdFilterTips");
  }
  if (myTipID == 2)
  {
    SeqCopySequence(_tips, _tips_LowVolume);
    tipCounter = Translate("LCDev_LowVolTips");
  }
  if (myTipID == 3)
  {
    SeqCopySequence(_tips, _tips_LowVolumeFilter);
    tipCounter = Translate("LCDev_LowVolFilterTips");
  }
  if (myTipID == 4)
  {
    SeqCopySequence(_tips, _tips_HighVolume);
    tipCounter = Translate("LCDev_HighTips");
  }
  if (myTipID == 5)
  {
    SeqCopySequence(_tips, _tips_HighVolumeFilter);
    tipCounter = Translate("LCDev_HighFilterTips");
  }
  if (myTipID == 22)
  {
    SeqCopySequence(_tips, _tips_50uL);
    tipCounter = Translate("LCDev_50uLTips");
  }
  if (myTipID == 23)
  {
    SeqCopySequence(_tips, _tips_50uLFilter);
    tipCounter = Translate("LCDev_50uLFilterTips");
  }
  if (myTipID == 25)
  {
    SeqCopySequence(_tips, _tips_5mL);
    tipCounter = Translate("LCDev_5mLTips");
  }
  if (myTipID == 29)
  {
    SeqCopySequence(_tips, _tips_5mL);
    tipCounter = Translate("LCDev_5mLTips");
    tipCounter = Translate("LCDev_4mLFilterTips");
  }
  if (myTipID == 62)
  {
    SeqCopySequence(_tips, _tips_WideBore1mL_12mm);
    tipCounter = Translate("LCDev_1mLWideBoreTips");
  }
  if (myTipID == 0)
  {
    SeqCopySequence(_tipAdapter96, _tipAdapter96_StandardVolume);
    tipCounter_adapter96 = Translate("LCDev_tipAdapter96_StdTips");
  }
  if (myTipID == 1)
  {
    SeqCopySequence(_tipAdapter96, _tipAdapter96_StandardVolumeFilter);
    tipCounter_adapter96 = Translate("LCDev_tipAdapter96_StdFilterTips");
  }
  if (myTipID == 4)
  {
    SeqCopySequence(_tipAdapter96, _tipAdapter96_HighVolume);
    tipCounter_adapter96 = Translate("LCDev_tipAdapter96_HighTips");
  }
  if (myTipID == 5)
  {
    SeqCopySequence(_tipAdapter96, _tipAdapter96_HighVolumeFilter);
    tipCounter_adapter96 = Translate("LCDev_tipAdapter96_HighFilterTips");
  }
  if (myTipID == 22)
  {
    SeqCopySequence(_tipAdapter96, _tipAdapter96_50uL);
    tipCounter_adapter96 = Translate("LCDev_tipAdapter96_50uLTips");
  }
  if (myTipID == 23)
  {
    SeqCopySequence(_tipAdapter96, _tipAdapter96_50uLFilter);
    tipCounter_adapter96 = Translate("LCDev_tipAdapter96_50uLFilterTips");
  }
  tipPicFilename = Translate("");
  loadTipAdapterPicFilename = Translate("");
  unloadTipAdapterPicFilename = Translate("");
  safeMPHPicFilename = Translate("");
  loadVialPicFilename = Translate("");
  loadPlatePicFilename = Translate("");
  tipRacksPicFilename = Translate("");
  wastePicFilename = Translate("");
  tipAdapterPicFilename = Translate("");
  {
        object fso, f;
        variable methodPath, methodFilename, methodName;
        fso.CreateObject("Scripting.FileSystemObject");
        methodFilename =   GetMethodFileName( );
        f = fso.GetFile(methodFilename);
        methodName = f.Name;
       methodPath = StrLeft(methodFilename, StrGetLength(methodFilename) - StrGetLength(methodName));
       //Trace(methodFilename);
       //Trace(methodName);
       //Trace(methodPath);
       tipPicFilename = StrConcat4(methodPath ,"pics\\" ,myTipID ,".jpg");
       loadTipAdapterPicFilename = StrConcat4(methodPath ,"pics\\" ,"LoadTipAdapter" ,".jpg");
       unloadTipAdapterPicFilename = StrConcat4(methodPath ,"pics\\" ,"UnloadTipAdapter" ,".jpg");
       safeMPHPicFilename = StrConcat4(methodPath ,"pics\\" ,"SafeMPH" ,".jpg");
       loadVialPicFilename = StrConcat4(methodPath ,"pics\\" ,"instructions_vial" ,".jpg");
       loadPlatePicFilename = StrConcat4(methodPath ,"pics\\" ,"instructions_plate" ,".jpg");
       tipRacksPicFilename = StrConcat4(methodPath ,"pics\\" ,"racks" ,".jpg");
       wastePicFilename = StrConcat4(methodPath ,"pics\\" ,"waste" ,".jpg");
       tipAdapterPicFilename = StrConcat4(methodPath ,"pics\\" ,"tipAdapter" ,".jpg");
  }
  systemPath = FilGetSystemPath();
  file_lastTipPickup96 = StrConcat2(systemPath, Translate("\\LVK_lastTipPickUp_labID_96.txt"));
  if (balanceContainer == 1)
  {
    balanceContainerText = Translate("glass vial");
  }
  if (balanceContainer == 2)
  {
    balanceContainerText = Translate("cryovial 2mL");
    DevAddContainerToRack(ML_STAR, Translate("LVK_BALANCE_VIAL_0001"), Translate("1"), Translate("LVK\\LVK_balance_Cryovial2mL.ctr"), 0, 0, 79);
  }
  if (balanceContainer == 3)
  {
    balanceContainerText = Translate("Eppendorf 1.5mL");
    DevAddContainerToRack(ML_STAR, Translate("LVK_BALANCE_VIAL_0001"), Translate("1"), Translate("LVK\\LVK_balance_Epp1.5mL.ctr"), 0, 0, 78);
  }
  if (balanceContainer == 4)
  {
    balanceContainerText = Translate("Eppendorf 2mL");
    DevAddContainerToRack(ML_STAR, Translate("LVK_BALANCE_VIAL_0001"), Translate("1"), Translate("LVK\\LVK_balance_Epp2mL.ctr"), 0, 0, 78);
  }
  DevGetLabwarePosition(ML_STAR, Translate("LVK_BALANCE_VIAL_0001"), x, y, z, a);
  Trace("Balance container=",balanceContainerText, " >> x=", x , " y=", y, " z=",z);
  logFilesPath = FilGetLogFilesPath();
  tmpDevLiqClassExcel = StrConcat4(logFilesPath, Translate("\\"), xml_liquidClass, Translate("_History.xls"));
  time = TimGetFormattedTime(Translate("%H-%M-%S"));
  runStartDate = TimGetFormattedDate("%Y-%b-%d");
  tmpDevLiqClassExcel_ThisRunOnly = StrConcat12(logFilesPath, Translate("\\"), xml_liquidClass, Translate("_"), runStartDate, Translate("__"), time, Translate("_trace.xls"), Translate(""), Translate(""), Translate(""), Translate(""));
  if(0){
    tmpDevLiqClassExcel = StrConcat2(logFilesPath, Translate("\\LVK_tempLiqClassParams.xls"));
    HSLMapReport::DeleteFile(tmpDevLiqClassExcel);
  }
}

private function Init_Instruments(  ) void {
  private variable hasAutoLoader;
  private variable initChannelPattern;
  private variable instrumentType;
  private variable autoLoadHomeTrack;
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  instrumentType = HSLML_STAR::GetInstrumentType_GlobalDevice(ML_STAR);
  hasAutoLoader = DevGetCfgValueWithKey(ML_STAR, 3);
  if (hasAutoLoader == 1)
  {
    if (instrumentType == 0)
    {
      autoLoadHomeTrack = 54;
    }
    else
    {
      autoLoadHomeTrack = 30;
    }
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  }
}

function Init_Balance( device & ML_STAR ) void {
  private variable strSerialNumber;
  private variable blnSuccess;
  private variable TRACE_LEVEL_DEBUG;
  TRACELEVEL::SetTraceLevel(TRACE_LEVEL_DEBUG);
  glSimulationCheck = HSLML_STAR::IsSimulatorMode(ML_STAR);
  if (glSimulationCheck == 0)
  {
    blnSuccess = METTLER_WXS::Initialize("", TRACE_LEVEL_DEBUG, balance_COMPort, 10.0, 2);
    if (blnSuccess == 0)
    {
      blnSuccess = METTLER_WXS::Initialize("", TRACE_LEVEL_DEBUG, balance_COMPort, 10.0, 2);
      HandleReturnValue(blnSuccess, "METTLER_WXS::Initialize");
    }
    blnSuccess = METTLER_WXS::GetSerialNumber(strSerialNumber);
    HandleReturnValue(blnSuccess, "METTLER_WXS::GetSerialNumber");
    METTLER_WXS::SetZero(1);
  }
}

function Zero_Balance(  ) void {
  private variable blnSuccess;
  private dialog dialogHandle_1;
  TrcTrace(Translate("Balance - Tare balance"), Translate(""));
  if (glSimulationCheck == 0)
  {
    blnSuccess = METTLER_WXS::SetZero(1);
    if (blnSuccess == 1)
    {
    }
    else
    {
      blnSuccess = METTLER_WXS::SetZero(1);
      if (blnSuccess == 1)
      {
      }
      else
      {
        dialogHandle_1.SetOutput(Translate("Could not set Zero."), "\n", Translate("The method is beeing aborted!!"));
        dialogHandle_1.ShowOutput(Translate("Tare"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        abort;
      }
    }
  }
  TrcTrace(Translate("Balance - Zero complete"), Translate(""));
}

function Measure_Balance( variable & o_weight ) void {
  private variable myWeight;
  private variable blnIsWeightStable;
  private variable strMeasuredWeight;
  private variable blnSuccess;
  private variable strMeasuredUnit;
  private variable fltWeightInGramm;
  o_weight = 0;
  TrcTrace(Translate("Balance - Start measurement..."), Translate(""));
  if (glSimulationCheck == 0)
  {
    blnSuccess = METTLER_WXS::GetWeight(1, fltWeightInGramm, blnIsWeightStable, strMeasuredWeight, strMeasuredUnit);
    if (blnSuccess == 0)
    {
      blnSuccess = METTLER_WXS::GetWeight(1, fltWeightInGramm, blnIsWeightStable, strMeasuredWeight, strMeasuredUnit);
      HandleReturnValue(blnSuccess, "METTLER_WXS::GetWeight");
    }
    myWeight = fltWeightInGramm * 1000;
  }
  else
  {
    GenerateRandomMeasure(myWeight);
  }
  o_weight = myWeight;
  TrcTrace4(Translate("Balance - Measured Weight = "), myWeight, Translate(" mg"), Translate(""));
  TrcTrace(Translate("Balance - Measurement complete"), Translate(""));
}

private function GetTipTypeName( variable tipTypeCode, variable & tipTypeString ) void {
  private variable array_Tips_Names[];
  tipTypeString = 0;
  array_Tips_Names.SetSize(80);
  array_Tips_Names.SetAt(1-1, "300uL Standard Volume Tip");
  array_Tips_Names.SetAt(2-1, "300uL Standard Volume Tip with filter");
  array_Tips_Names.SetAt(3-1, Translate("10uL Low Volume Tip"));
  array_Tips_Names.SetAt(4-1, Translate("10uL Low Volume Tip with filter"));
  array_Tips_Names.SetAt(5-1, Translate("1000uL High Volume Tip"));
  array_Tips_Names.SetAt(6-1, Translate("1000uL High Volume Tip with filter"));
  array_Tips_Names.SetAt(7-1, Translate("50ul Low Volume Needle OLD"));
  array_Tips_Names.SetAt(8-1, Translate("300ul Standard Volume Needle OLD"));
  array_Tips_Names.SetAt(9-1, Translate("1000ul High Volume Needle OLD"));
  array_Tips_Names.SetAt(11-1, Translate("1000ul Teaching Needle"));
  array_Tips_Names.SetAt(12-1, Translate("10uL Needle"));
  array_Tips_Names.SetAt(13-1, Translate("300uL Needle"));
  array_Tips_Names.SetAt(14-1, Translate("1000uL Needle"));
  array_Tips_Names.SetAt(15-1, Translate("1000uL Needle CORE-Grip Tool"));
  array_Tips_Names.SetAt(16-1, "30uL Tip for 384");
  array_Tips_Names.SetAt(17-1, "300uL Needle (Borner 1)");
  array_Tips_Names.SetAt(18-1, "50uL needle (Borner 2)");
  array_Tips_Names.SetAt(19-1, "Vacuum Suction Tool");
  array_Tips_Names.SetAt(20-1, "50uL Tip HAM Reno");
  array_Tips_Names.SetAt(21-1, "50uL Tip for 384");
  array_Tips_Names.SetAt(22-1, "50ul Needle for 384");
  array_Tips_Names.SetAt(23-1, "50uL Tip");
  array_Tips_Names.SetAt(24-1, "50uL Tip with filter");
  array_Tips_Names.SetAt(25-1, "150uL Piercing Needle");
  array_Tips_Names.SetAt(26-1, "5mL Tip");
  array_Tips_Names.SetAt(27-1, "5mL Teaching Needle");
  array_Tips_Names.SetAt(28-1, "5mL CORE Grip Tool");
  array_Tips_Names.SetAt(29-1, Translate("300uL Rocket Tip (96) for 384 head"));
  array_Tips_Names.SetAt(30-1, "4mL Tip with filter");
  array_Tips_Names.SetAt(31-1, "300uL Standard Volume Tip clear");
  array_Tips_Names.SetAt(32-1, "50uL Tip clear");
  array_Tips_Names.SetAt(33-1, Translate("10uL Low Volume Tip clear"));
  array_Tips_Names.SetAt(34-1, "50uL Tip conductive for 384");
  array_Tips_Names.SetAt(35-1, "CO-RE 96 TADM Head maintenance tool");
  array_Tips_Names.SetAt(36-1, Translate("150uL Piercing Tip"));
  array_Tips_Names.SetAt(37-1, "SLIM CO-RE Tip 300uL");
  array_Tips_Names.SetAt(38-1, "50uL Tip clear for 384");
  array_Tips_Names.SetAt(39-1, "50ul Piercing Needle CR");
  array_Tips_Names.SetAt(40-1, "100ul Piercing Needle CR");
  array_Tips_Names.SetAt(41-1, "150ul Piercing Needle CR");
  array_Tips_Names.SetAt(42-1, "250ul Piercing Needle CR");
  array_Tips_Names.SetAt(43-1, "300ul Piercing Needle CR");
  array_Tips_Names.SetAt(44-1, "800ul Piercing Needle CR");
  array_Tips_Names.SetAt(45-1, Translate("150uL Piercing Tip with filter"));
  array_Tips_Names.SetAt(46-1, "SLIM CO-RE Tip 300uL with filter");
  array_Tips_Names.SetAt(47-1, "1mL Tube Tool");
  array_Tips_Names.SetAt(48-1, "Flip Tube tool");
  array_Tips_Names.SetAt(51-1, "5ml Channel CO-RE Suction Tool");
  array_Tips_Names.SetAt(52-1, "1ml Channel CO-RE Suction Tool");
  array_Tips_Names.SetAt(53-1, "5ml Channel Calibration Tool");
  array_Tips_Names.SetAt(58-1, "5ml Channel CORE Grip Tool (LONG)");
  array_Tips_Names.SetAt(61-1, Translate("300ul Standard Volume Wide Bore 0.71mm Tip"));
  array_Tips_Names.SetAt(62-1, Translate("300ul Standard Volume Wide Bore 1.55mm Tip"));
  array_Tips_Names.SetAt(63-1, Translate("1000ul High Volume Wide Bore 1.2mm Tip"));
  array_Tips_Names.SetAt(64-1, Translate("1000ul High Volume Wide Bore 3.2mm Tip"));
  array_Tips_Names.SetAt(65-1, Translate("300ul Standard Volume Wide Bore 0.71mm Tip with filter"));
  array_Tips_Names.SetAt(66-1, Translate("300ul Standard Volume Wide Bore 1.55mm Tip with filter"));
  array_Tips_Names.SetAt(67-1, Translate("1000ul High Volume Wide Bore 1.2mm Tip with filter"));
  array_Tips_Names.SetAt(68-1, Translate("1000ul High Volume Wide Bore 3.2mm Tip with filter"));
  tipTypeCode = tipTypeCode + 1;
  tipTypeString=array_Tips_Names.GetAt(tipTypeCode-1);
}

private function CreatePattern_OneChannel( variable i_TotalNumberOfChannelsInstalled, variable i_ChannelOfInterest, variable & o_ChannelPattern ) void {
  private variable tmpPattern;
  o_ChannelPattern = 0;
  tmpPattern = Translate("0000000000000000000000000000000000");
  o_ChannelPattern= StrLeft( StrLeft(tmpPattern,i_ChannelOfInterest-1) + "1" + tmpPattern ,i_TotalNumberOfChannelsInstalled);
}

private function Pipette_1mLChannels(  ) void {
  private variable loopCounter_PipettingCycles;
  private variable doTipEject;
  private variable doTipPickUp;
  private variable arraySingleChannelPatterns[];
  private variable strAsp_cLLD_pLLD;
  private variable loopCounter1;
  private variable disp_with_LLD;
  private variable loopCounter_Main;
  private variable weightMeasured;
  private variable loopCounter_Channels;
  private variable currentChannel;
  private variable tmpPos;
  private variable channelIndex;
  private variable dispenseModeBlowout;
  private variable msg;
  doTipPickUp = 1;
  doTipEject = 1;
  CreateSinglechnPatternsArray_FromChnPatternAll(channelPattern_AllChannels, numActiveChannels, arraySingleChannelPatterns);
  Util2::Debug::TraceArray(Translate("Array of channel patterns"), arraySingleChannelPatterns);
  Trace("number of active chn= ", numActiveChannels);
  aspVolume= xml_asp_volume + (xml_disp_preVolume*xml_preDispenseCycles) + (xml_disp_preVolume*xml_postDispenseCycles);
  tipsOn = 0;
  startingTipsPosition_Run = _tips.GetCurrentPosition();
  developmentModeCycleCounter = 1;
  {
    loopCounter_Main = 0;
    while (1 == 1)
    {
      loopCounter_Main = loopCounter_Main + 1;
      arrayDevMeasures.SetSize(0);
      {
        for(loopCounter_Channels = 0; loopCounter_Channels < numActiveChannels;)
        {
          loopCounter_Channels = loopCounter_Channels + 1;
          channelPattern=arraySingleChannelPatterns.GetAt(loopCounter_Channels-1);
          if(0){
            Trace(">>>>>>>>>>>>> channel pattern=", channelPattern , "<<<<<<<<<<<<<<<<<");
          }
          {
            for(loopCounter_PipettingCycles = 0; loopCounter_PipettingCycles < xml_cycleCount;)
            {
              loopCounter_PipettingCycles = loopCounter_PipettingCycles + 1;
              GetChannelIndexFromPattern(channelPattern, channelIndex);
              if (testMode == "development")
              {
                Trace("*********************************************************************");
                Trace("Channel #=", channelIndex, "  ,  Pipetting cycle =", developmentModeCycleCounter);
                Trace("*********************************************************************");
              }
              else
              {
                Trace("*********************************************************************");
                Trace("Channel #=", channelIndex, "  ,  Pipetting cycle =", loopCounter_PipettingCycles);
                Trace("*********************************************************************");
              }
              if (xml_ADC == 1)
              {
                HSLML_STAR::AntiDropletControl_1000ulChannel_On(ML_STAR);
              }
              if (xml_keepTips == 0)
              {
                doTipPickUp = 1;
              }
              if (xml_keepTips == 1)
              {
                doTipPickUp = 0;
              }
              if (loopCounter_PipettingCycles == 1)
              {
                if (loopCounter_Main == 1)
                {
                  doTipPickUp = 1;
                }
              }
              if (doTipPickUp == 1)
              {
                tmpPos = _tips.GetCurrentPosition();
                if (tmpPos == 0)
                {
                  EditTips_Channels();
                }
                LVK::ReportNewBalanceStatus(Translate("Tip pick up..."));
                ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
                tipsOn = 1;
                if (testMode == "development")
                {
                  if (xml_keepTips == 0)
                  {
                    startingTipsPosition_Channel = _tips.GetCurrentPosition();
                  }
                  SeqIncrement(_tips, 1);
                  TipCount::Write2(_tips, tipCounter, ML_STAR);
                }
              }
              LVK::ReportNewBalanceStatus(Translate("Aspirating..."));
              strAsp_cLLD_pLLD = StrConcat2(xml_asp_cLLD, xml_asp_pLLD);
              if (strAsp_cLLD_pLLD == "10")
              {
                ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              }
              if (strAsp_cLLD_pLLD == "11")
              {
                ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              }
              if (strAsp_cLLD_pLLD == "01")
              {
                ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              }
              if (strAsp_cLLD_pLLD == "00")
              {
                ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              }
              if (dispenseType_JetSurface == "Jet")
              {
                disp_with_LLD = 0;
              }
              else
              {
                if (xml_disp_cLLD == 1)
                {
                  disp_with_LLD = 1;
                }
                else
                {
                  disp_with_LLD = 0;
                }
              }
              {
                for(loopCounter1 = 0; loopCounter1 < xml_preDispenseCycles;)
                {
                  loopCounter1 = loopCounter1 + 1;
                  msg = StrConcat2(Translate("Pre-Dispense #"), loopCounter1);
                  LVK::ReportNewBalanceStatus(msg);
                  Trace("Channel=", channelPattern, "  ,  Pre-Dispense # =", loopCounter1);
                  if (disp_with_LLD == 0)
                  {
                    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  }
                  else
                  {
                    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  }
                }
              }
              {
                for(loopCounter1 = 0; loopCounter1 < xml_dispenseCycles;)
                {
                  loopCounter1 = loopCounter1 + 1;
                  msg = StrConcat2(Translate("Dispense #"), loopCounter1);
                  LVK::ReportNewBalanceStatus(msg);
                  Trace("Channel=", channelPattern, "  ,  Dispense # =", loopCounter1);
                  if (xml_postDispenseCycles == 0)
                  {
                    if (loopCounter1 == xml_dispenseCycles)
                    {
                      if (xml_ADC == 1)
                      {
                        HSLML_STAR::AntiDropletControl_1000ulChannel_Off(ML_STAR);
                      }
                    }
                  }
                  Zero_Balance();
                  dispenseModeBlowout = 8;
                  if (xml_postDispenseCycles == 0)
                  {
                    if (loopCounter1 == xml_dispenseCycles)
                    {
                      dispenseModeBlowout = 9;
                    }
                  }
                  if (disp_with_LLD == 0)
                  {
                    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  }
                  else
                  {
                    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  }
                  Measure_Balance(weightMeasured);
                  currentChannel = StrFind(channelPattern, Translate("1"));
                  currentChannel = currentChannel + 1;
                  if (testMode == "development")
                  {
                    ReportMeasuredData(weightMeasured, currentChannel, loopCounter1, developmentModeCycleCounter);
                    arrayDevMeasures.AddAsLast(weightMeasured);
                    Trace("file dev>>>>", tmpDevLiqClassExcel_ThisRunOnly);
                    RecordWeightForDevelopment(developmentModeCycleCounter, loopCounter1, xml_disp_volume, weightMeasured, currentChannel);
                  }
                  else
                  {
                    ReportMeasuredData(weightMeasured, currentChannel, loopCounter1, loopCounter_PipettingCycles);
                  }
                }
              }
              {
                for(loopCounter1 = 0; loopCounter1 < xml_postDispenseCycles;)
                {
                  loopCounter1 = loopCounter1 + 1;
                  msg = StrConcat2(Translate("Post-Dispense #"), loopCounter1);
                  LVK::ReportNewBalanceStatus(msg);
                  Trace("Channel=", channelPattern, "  ,  Post-Dispense # =", loopCounter1);
                  if (loopCounter1 == xml_postDispenseCycles)
                  {
                    if (xml_ADC == 1)
                    {
                      HSLML_STAR::AntiDropletControl_1000ulChannel_Off(ML_STAR);
                    }
                  }
                  dispenseModeBlowout = 8;
                  if (loopCounter1 == xml_postDispenseCycles)
                  {
                    dispenseModeBlowout = 9;
                  }
                  if (disp_with_LLD == 0)
                  {
                    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  }
                  else
                  {
                    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
                  }
                }
              }
              doTipEject = 0;
              if (xml_keepTips == 0)
              {
                doTipEject = 1;
              }
              else
              {
                if (loopCounter_PipettingCycles == xml_cycleCount)
                {
                  if (testMode == "validation")
                  {
                    doTipEject = 1;
                  }
                  else
                  {
                    if (numActiveChannels > 1000)
                    {
                      doTipEject = 1;
                    }
                  }
                }
              }
              if (doTipEject == 1)
              {
                EjectTips();
              }
              if (loopCounter_PipettingCycles == xml_cycleCount)
              {
                if (xml_returnTips == 1)
                {
                  if (xml_reUseTips == 1)
                  {
                    SeqIncrement(_tips, 1);
                    TipCount::Write2(_tips, tipCounter, ML_STAR);
                  }
                }
              }
            }
          }
        }
      }
      if (testMode == "development")
      {
        RollBack_LiquidClassChanges();
        developmentModeCycleCounter = developmentModeCycleCounter + 1;
        LVK::ReportCycleComplete();
      }
      if (testMode == "validation")
      {
        break;
      }
      if (xml_reUseTips == 1)
      {
        _tips.SetCurrentPosition(startingTipsPosition_Run);
      }
    }
  }
}

private function CreateSinglechnPatternsArray_FromChnPatternAll( variable i_ChannelPattern, variable & o_NumberOfActiveChannels, variable & o_arraySingleChannelPatterns[] ) void {
  private variable tmpPattern;
  private variable strLength;
  private variable loopCounter1;
  private variable charIndex;
  private variable chn;
  o_NumberOfActiveChannels = 0;
  o_arraySingleChannelPatterns.SetSize( 0);
  o_arraySingleChannelPatterns.SetSize(0);
  strLength = StrGetLength(i_ChannelPattern);
  {
    for(loopCounter1 = 0; loopCounter1 < strLength;)
    {
      loopCounter1 = loopCounter1 + 1;
      charIndex = loopCounter1 - 1;
      chn = StrMid(i_ChannelPattern, charIndex, 1);
      if (chn == "1")
      {
        CreatePattern_OneChannel(strLength, loopCounter1, tmpPattern);
        o_arraySingleChannelPatterns.AddAsLast(tmpPattern);
      }
    }
  }
  o_NumberOfActiveChannels=o_arraySingleChannelPatterns.GetSize();
}

private function GenerateRandomMeasure( variable & weightMeasured ) void {
  private variable randomWeight;
  weightMeasured = 0;
  randomWeight = LVK::RandomWeight();
  weightMeasured = StrFVal(randomWeight);
}

private function RetrieveLVKParameters(  ) void {
  private variable strTip;
  LVK::Connect();
  xml_device = LVK::Device();
  xml_temperature = LVK::Temperature();
  xml_humidity = LVK::Humidity();
  xml_deviceIndex = LVK::DeviceIndex();
  xml_tipSize = LVK::TipSize();
  xml_tipSize = StrIVal(xml_tipSize);
  xml_reUseTips = LVK::ReUseTips();
  xml_reUseTips = StrIVal(xml_reUseTips);
  xml_keepTips = LVK::KeepTips();
  xml_keepTips = StrIVal(xml_keepTips);
  xml_returnTips = LVK::ReturnTips();
  xml_returnTips = StrIVal(xml_returnTips);
  xml_liquidClass = LVK::LiquidClass();
  xml_liquidDensity = LVK::LiquidDensity();
  xml_liquidDensity = StrFVal(xml_liquidDensity);
  xml_cycleCount = LVK::CycleCount();
  xml_cycleCount = StrIVal(xml_cycleCount);
  xml_ADC = LVK::AutomaticDripControl();
  xml_ADC = StrIVal(xml_ADC);
  xml_asp_pLLD = LVK::AspiratePLLD();
  xml_asp_cLLD = LVK::AspirateCLLD();
  xml_asp_fixedHeight = LVK::AspirateHeight();
  xml_asp_fixedHeight = StrFVal(xml_asp_fixedHeight);
  xml_asp_volume = LVK::AspirateVolume();
  xml_asp_volume = StrFVal(xml_asp_volume);
  xml_asp_preVolume = LVK::AspiratePreVolume();
  xml_asp_preVolume = StrFVal(xml_asp_preVolume);
  xml_asp_postVolume = LVK::AspiratePostVolume();
  xml_asp_postVolume = StrFVal(xml_asp_postVolume);
  xml_asp_mixCycles = LVK::AspirateMixCycles();
  xml_asp_mixCycles = StrIVal(xml_asp_mixCycles);
  xml_asp_mixDepth = LVK::AspirateMixDepth();
  xml_asp_mixDepth = StrFVal(xml_asp_mixDepth);
  xml_asp_mixVolume = LVK::AspirateMixVolume();
  xml_asp_mixVolume = StrFVal(xml_asp_mixVolume);
  xml_disp_pLLD = LVK::DispensePLLD();
  xml_disp_pLLD = StrIVal(xml_disp_pLLD);
  xml_disp_cLLD = LVK::DispenseCLLD();
  xml_disp_cLLD = StrIVal(xml_disp_cLLD);
  xml_disp_fixedHeight = LVK::DispenseHeight();
  xml_disp_fixedHeight = StrFVal(xml_disp_fixedHeight);
  xml_disp_volume = LVK::DispenseVolume();
  xml_disp_volume = StrFVal(xml_disp_volume);
  xml_disp_preVolume = LVK::DispensePreVolume();
  xml_disp_preVolume = StrFVal(xml_disp_preVolume);
  xml_disp_postVolume = LVK::DispensePostVolume();
  xml_disp_postVolume = StrFVal(xml_disp_postVolume);
  xml_disp_mixCycles = LVK::DispenseMixCycles();
  xml_disp_mixCycles = StrIVal(xml_disp_mixCycles);
  xml_disp_mixDepth = LVK::DispenseMixDepth();
  xml_disp_mixDepth = StrFVal(xml_disp_mixDepth);
  xml_disp_mixVolume = LVK::DispenseMixVolume();
  xml_disp_mixVolume = StrFVal(xml_disp_mixVolume);
  xml_dispenseCycles = LVK::DispenseCycles();
  xml_dispenseCycles = StrIVal(xml_dispenseCycles);
  xml_preDispenseCycles = LVK::PreDispenseCycles();
  xml_preDispenseCycles = StrIVal(xml_preDispenseCycles);
  xml_postDispenseCycles = LVK::PostDispenseCycles();
  xml_postDispenseCycles = StrIVal(xml_postDispenseCycles);
  channelPattern_AllChannels = xml_deviceIndex;
  if (xml_cycleCount == -1)
  {
    testMode = Translate("development");
    if(0){
      xml_developValidation_cycleCount = 999999;
    }
    xml_cycleCount = 1;
  }
  else
  {
    testMode = Translate("validation");
    if(0){
      xml_developValidation_cycleCount = 1;
    }
  }
  TrcTrace(Translate("______________  Run Parameters ____________________"), Translate(""));
  TrcTrace(Translate("Test Mode = "), testMode);
  TrcTrace(Translate("Device = "), xml_device);
  TrcTrace(Translate("Temperature (ºC) = "), xml_temperature);
  TrcTrace(Translate("Humidity (%) = "), xml_humidity);
  TrcTrace(Translate("Channels used = "), xml_deviceIndex);
  GetTipTypeName(xml_tipSize, strTip);
  TrcTrace(Translate("Tip type ="), strTip);
  TrcTrace(Translate("Reuse Tips = "), xml_reUseTips);
  TrcTrace(Translate("Keep Tips = "), xml_keepTips);
  TrcTrace(Translate("Return Tips = "), xml_returnTips);
  TrcTrace(Translate("Liquid Class = "), xml_liquidClass);
  TrcTrace(Translate("Liquid Density (g/mL) = "), xml_liquidDensity);
  TrcTrace(Translate("Number Of Cycles for testing = "), xml_cycleCount);
  TrcTrace(Translate("ADC = "), xml_ADC);
  TrcTrace(Translate("ADC = "), xml_ADC);
  LVK::ReportNewBalanceStatus(Translate(""));
}

private function ReportMeasuredData( variable weightMeasured, variable channelNumber, variable dispenseCycle, variable cycleCount ) void {
  weightMeasured = StrFStr(weightMeasured);
  channelNumber = StrIStr(channelNumber);
  cycleCount = StrIStr(cycleCount);
  dispenseCycle = StrIStr(dispenseCycle);
  LVK::ReportNewMeasurementData(cycleCount, dispenseCycle, weightMeasured, channelNumber);
}

private function EjectTips(  ) void {
  private variable currentTipsPosition;
  LVK::ReportNewBalanceStatus(Translate("Ejecting Tips..."));
  if (testMode == "validation")
  {
    if (xml_returnTips == 0)
    {
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      tipsOn = 0;
      SeqIncrement(_tips, 1);
    }
    else
    {
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      tipsOn = 0;
      if (xml_reUseTips == 0)
      {
        SeqIncrement(_tips, 1);
      }
    }
  }
  else
  {
    if (xml_keepTips == 1)
    {
      channelPattern = channelPattern_AllChannels;
      currentTipsPosition = _tips.GetCurrentPosition();
      _tips.SetCurrentPosition(startingTipsPosition_Run);
    }
    if (xml_returnTips == 0)
    {
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      tipsOn = 0;
      if (xml_keepTips == 1)
      {
        _tips.SetCurrentPosition(currentTipsPosition);
      }
    }
    else
    {
      if (xml_keepTips == 0)
      {
        currentTipsPosition = _tips.GetCurrentPosition();
        _tips.SetCurrentPosition(startingTipsPosition_Channel);
      }
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      tipsOn = 0;
      if (xml_reUseTips == 0)
      {
        _tips.SetCurrentPosition(currentTipsPosition);
      }
    }
  }
  TipCount::Write2(_tips, tipCounter, ML_STAR);
  LVK::ReportNewBalanceStatus(Translate(""));
}

private function EditTips_Channels(  ) void {
  private variable loopCounter2;
  private variable tmpPos;
  private variable msg;
  {
    loopCounter2 = 0;
    while (1 == 1)
    {
      loopCounter2 = loopCounter2 + 1;
      msg = StrConcat4(Translate(" Please load "), myTipType, Translate(""), Translate(""));
      AswStandardDialogs::MessageDialogWithImage(Translate("Please load tips"), AswStandardDialogs::IconType::Information, AswStandardDialogs::ButtonType::Ok, 0, 0, 0, msg, tipPicFilename, 450);
      TipCount::Edit2(_tips, tipCounter, ML_STAR, 600);
      tmpPos = _tips.GetCurrentPosition();
      if (tmpPos > 0)
      {
        break;
      }
    }
  }
}

private function GetChannelIndexFromPattern( variable i_ChannelPattern, variable & chnIndex ) void {
  private variable charIndex;
  private variable strLength;
  private variable chn;
  private variable loopCounter1;
  chnIndex = 0;
  strLength = StrGetLength(i_ChannelPattern);
  {
    for(loopCounter1 = 0; loopCounter1 < strLength;)
    {
      loopCounter1 = loopCounter1 + 1;
      charIndex = loopCounter1 - 1;
      chn = StrMid(i_ChannelPattern, charIndex, 1);
      if (chn == "1")
      {
        chnIndex = loopCounter1;
      }
    }
  }
}

private function Pipette_96Head(  ) void {
  private variable loopCounter_Main;
  private variable doTipEject;
  private variable doTipPickUp;
  private variable loopCounter1;
  private variable weightMeasured;
  private variable tmpPos;
  private variable disp_with_LLD;
  private variable strAsp_cLLD_pLLD;
  private variable loopCounter_PipettingCycles;
  private variable dispenseModeBlowout;
  private variable msg;
  private variable currentChannel;
  doTipPickUp = 1;
  doTipEject = 1;
  Trace("number of active chn= 96 head > H12");
  aspVolume= xml_asp_volume + (xml_disp_preVolume*xml_preDispenseCycles) + (xml_disp_preVolume*xml_postDispenseCycles);
  tipsOn = 0;
  startingTipsPosition_Run = _tips.GetCurrentPosition();
  developmentModeCycleCounter = 1;
  {
    loopCounter_Main = 0;
    while (1 == 1)
    {
      loopCounter_Main = loopCounter_Main + 1;
      arrayDevMeasures.SetSize(0);
      {
        for(loopCounter_PipettingCycles = 0; loopCounter_PipettingCycles < xml_cycleCount;)
        {
          loopCounter_PipettingCycles = loopCounter_PipettingCycles + 1;
          Trace("*********************************************************************");
          Trace("Channel #= 96 head - H12","  ,  Pipetting cycle =", loopCounter_PipettingCycles);
          Trace("*********************************************************************");
          if (xml_keepTips == 0)
          {
            doTipPickUp = 1;
          }
          if (xml_keepTips == 1)
          {
            doTipPickUp = 0;
          }
          if (loopCounter_PipettingCycles == 1)
          {
            if (loopCounter_Main == 1)
            {
              doTipPickUp = 1;
            }
          }
          if (doTipPickUp == 1)
          {
            tmpPos = _tipAdapter96.GetCurrentPosition();
            if (tmpPos == 0)
            {
              EditTips_DiscardTipsInTipAdapter(1);
              EditTips_Head(0);
            }
            LVK::ReportNewBalanceStatus(Translate("Tip pick up..."));
            ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
            tipsOn = 1;
            if (testMode == "development")
            {
              if (xml_keepTips == 0)
              {
                startingTipsPosition_Channel = _tipAdapter96.GetCurrentPosition();
              }
              SeqIncrement(_tipAdapter96, 1);
              TipCount::Write2(_tipAdapter96, tipCounter_adapter96, ML_STAR);
            }
          }
          LVK::ReportNewBalanceStatus(Translate("Aspirating..."));
          strAsp_cLLD_pLLD = StrConcat2(xml_asp_cLLD, xml_asp_pLLD);
          if (strAsp_cLLD_pLLD == "10")
          {
            ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
          }
          if (strAsp_cLLD_pLLD == "11")
          {
            ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
          }
          if (strAsp_cLLD_pLLD == "01")
          {
            ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
          }
          if (strAsp_cLLD_pLLD == "00")
          {
            ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
          }
          if (dispenseType_JetSurface == "Jet")
          {
            disp_with_LLD = 0;
          }
          else
          {
            if (xml_disp_cLLD == 1)
            {
              disp_with_LLD = 1;
            }
            else
            {
              disp_with_LLD = 0;
            }
          }
          {
            for(loopCounter1 = 0; loopCounter1 < xml_preDispenseCycles;)
            {
              loopCounter1 = loopCounter1 + 1;
              msg = StrConcat2(Translate("Pre-Dispense #"), loopCounter1);
              LVK::ReportNewBalanceStatus(msg);
              Trace("96-head > H12", "  ,  Pre-Dispense # =", loopCounter1);
              if (disp_with_LLD == 0)
              {
                ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
              }
              else
              {
                ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
              }
            }
          }
          {
            for(loopCounter1 = 0; loopCounter1 < xml_dispenseCycles;)
            {
              loopCounter1 = loopCounter1 + 1;
              msg = StrConcat2(Translate("Dispense #"), loopCounter1);
              LVK::ReportNewBalanceStatus(msg);
              Trace("96-head > H12", "  ,  Dispense # =", loopCounter1);
              Zero_Balance();
              dispenseModeBlowout = 8;
              if (xml_postDispenseCycles == 0)
              {
                if (loopCounter1 == xml_dispenseCycles)
                {
                  dispenseModeBlowout = 9;
                }
              }
              if (disp_with_LLD == 0)
              {
                ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
              }
              else
              {
                ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
              }
              Measure_Balance(weightMeasured);
              if (testMode == "development")
              {
                ReportMeasuredData(weightMeasured, 1, loopCounter1, developmentModeCycleCounter);
                arrayDevMeasures.AddAsLast(weightMeasured);
                RecordWeightForDevelopment(developmentModeCycleCounter, loopCounter1, xml_disp_volume, weightMeasured, currentChannel);
              }
              else
              {
                ReportMeasuredData(weightMeasured, 1, loopCounter1, loopCounter_PipettingCycles);
              }
            }
          }
          {
            for(loopCounter1 = 0; loopCounter1 < xml_postDispenseCycles;)
            {
              loopCounter1 = loopCounter1 + 1;
              msg = StrConcat2(Translate("Post-Dispense #"), loopCounter1);
              LVK::ReportNewBalanceStatus(msg);
              Trace("96-head > H12", "  ,  Post-Dispense # =", loopCounter1);
              dispenseModeBlowout = 8;
              if (loopCounter1 == xml_postDispenseCycles)
              {
                dispenseModeBlowout = 9;
              }
              if (disp_with_LLD == 0)
              {
                ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
              }
              else
              {
                ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
              }
            }
          }
          doTipEject = 0;
          if (xml_keepTips == 0)
          {
            doTipEject = 1;
          }
          else
          {
            if (loopCounter_PipettingCycles == xml_cycleCount)
            {
              if (testMode == "validation")
              {
                doTipEject = 1;
              }
              else
              {
                if (numActiveChannels > 1000)
                {
                  doTipEject = 1;
                }
              }
            }
          }
          if (doTipEject == 1)
          {
            EjectTips_96();
          }
          if (loopCounter_PipettingCycles == xml_cycleCount)
          {
            if (xml_returnTips == 1)
            {
              if (xml_reUseTips == 1)
              {
                SeqIncrement(_tipAdapter96, 1);
                TipCount::Write2(_tipAdapter96, tipCounter_adapter96, ML_STAR);
              }
            }
          }
        }
      }
      if (testMode == "development")
      {
        RollBack_LiquidClassChanges();
        developmentModeCycleCounter = developmentModeCycleCounter + 1;
        LVK::ReportCycleComplete();
      }
      if (testMode == "validation")
      {
        break;
      }
    }
  }
}

private function EditTips_Head( variable isFirstEdit ) void {
  private variable loopCounter2;
  private variable showAbort;
  private variable retVal;
  private variable remainingTipsInRack;
  private variable labID;
  private variable loopCounter4;
  private variable posID;
  private variable tmpPos;
  private variable msg;
  private variable currentPosTipAdapter;
  private variable tmp;
  private dialog dialogHandle_2;
  private file file1;
  if (isFirstEdit == 1)
  {
    tmp = _tipAdapter96.GetCurrentPosition();
    if (tmp == 0)
    {
      msg = StrConcat4(Translate(" Please review the 'A_Setup_TipSequences' submethod "), Translate(" to define the right tip sequence for the TIP ADAPTER 96 "), Translate(" from your decklayout"), Translate("\n\nThe run will abort now"));
      AswStandardDialogs::ErrorDialog(Translate("No tip support/adapter sequence defined"), AswStandardDialogs::IconType::Error, AswStandardDialogs::ButtonType::Ok, 0, 0, 0, Translate("No tip support/adapter sequence defined"), msg);
      abort;
    }
    labID = SeqGetLabwareId(_tipAdapter96);
    DevGetLabwarePosition(ML_STAR, labID, x, y, z, a);
    if (y > 468.9)
    {
      msg = StrConcat4(Translate(" The 96 head - channel 12 can´t reach the first position of the "), Translate(" selected TIP ADAPTER 96. (max Y position= 468.9)."), Translate(" \nPlease place the tip adapter closer to the front of the instrument"), Translate("\n\nThe run will abort now"));
      AswStandardDialogs::ErrorDialog(Translate("No tip support/adapter sequence defined"), AswStandardDialogs::IconType::Error, AswStandardDialogs::ButtonType::Ok, 0, 0, 0, Translate("No tip support/adapter sequence defined"), msg);
      abort;
    }
    showAbort = 0;
    if (myTipID == 2)
    {
      showAbort = 1;
    }
    if (myTipID == 3)
    {
      showAbort = 1;
    }
    if (showAbort == 1)
    {
      dialogHandle_2.SetOutput(Translate("10uL tip testing is not currently supported with multi-channel heads"), Translate(" "), "\n", Translate("Please select a different tip type"), "\n");
      dialogHandle_2.ShowOutput(Translate("10uL tip testing is not currently supported"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      abort;
    }
    ML_STAR.Balance_Plate.SetCurrentPosition(96);
  }
  if (isFirstEdit == 0)
  {
  }
  {
    loopCounter2 = 0;
    while (1 == 1)
    {
      loopCounter2 = loopCounter2 + 1;
      msg = StrConcat4(Translate(" The test requires "), myTipType, Translate(" on the tip adapter.\n>>> Do you want to load a new rack of tips onto the tip adapter?"), Translate("\n\n (Press NO if you want to use the existing tips on the adapter)"));
      retVal = AswStandardDialogs::MessageDialogWithImage(Translate("Load tip adapter with new tips?"), AswStandardDialogs::IconType::Question, AswStandardDialogs::ButtonType::YesNo, 0, 0, 0, msg, loadTipAdapterPicFilename, 800);
      if (retVal == 6)
      {
        {
          loopCounter2 = 0;
          while (1 == 1)
          {
            loopCounter2 = loopCounter2 + 1;
            msg = StrConcat4(Translate(" Please load "), myTipType, Translate(" in the carrier \n\n(tip adapter must be EMPTY!!!)"), Translate(""));
            AswStandardDialogs::MessageDialogWithImage(Translate("Please load tips"), AswStandardDialogs::IconType::Information, AswStandardDialogs::ButtonType::Ok, 0, 0, 0, msg, tipPicFilename, 450);
            TipCount::Edit2(_tips, tipCounter, ML_STAR, 600);
            tmpPos = _tips.GetCurrentPosition();
            if (tmpPos > 0)
            {
              break;
            }
          }
        }
        labID = SeqGetLabwareId(_tips);
        labIDOfEmptyTipRack96InCarrier = labID;
        SeqCopySequence(tempTips, _tips);
        SeqRemoveAll(tempTips);
        {
          for(loopCounter4 = 0; loopCounter4 < 96;)
          {
            loopCounter4 = loopCounter4 + 1;
            posID = StrIStr(loopCounter4);
            SeqAdd(tempTips, labID, posID);
          }
        }
        tempTips.SetCurrentPosition(1);
        file1.AddField(1, labID, hslString);
        file1.SetDelimiter(hslAsciiText);
        if( 0 == file1.Open(file_lastTipPickup96, hslWrite) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, file_lastTipPickup96, "HxMetEdCompCmd");
        }
        if( 0 == file1.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 != file1.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        file1.RemoveFields();
        LVK::ReportNewBalanceStatus(Translate("Tip pick up..."));
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        LVK::ReportNewBalanceStatus(Translate("Ejecting tips..."));
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        remainingTipsInRack = SeqGetPositionCountForCurrLabware(_tips);
        currentPosTipAdapter = 97 - remainingTipsInRack;
        _tipAdapter96.SetCurrentPosition(currentPosTipAdapter);
        SeqIncrement(_tips, remainingTipsInRack);
        TipCount::Write2(_tips, tipCounter, ML_STAR);
        TipCount::Write2(_tipAdapter96, tipCounter_adapter96, ML_STAR);
      }
      else
      {
        msg = StrConcat4(Translate(" Please confirm the "), myTipType, Translate(" present in the tip adapter"), Translate(""));
        AswStandardDialogs::MessageDialogWithImage(Translate("Please load tips"), AswStandardDialogs::IconType::Information, AswStandardDialogs::ButtonType::Ok, 0, 0, 0, msg, tipPicFilename, 450);
        TipCount::Edit2(_tipAdapter96, tipCounter_adapter96, ML_STAR, 600);
      }
      tmpPos = _tipAdapter96.GetCurrentPosition();
      if (tmpPos > 0)
      {
        break;
      }
    }
  }
  if (isFirstEdit == 1)
  {
    AswStandardDialogs::MessageDialogWithImage(Translate("Verify room for MPH shifted tip pick up"), AswStandardDialogs::IconType::Information, AswStandardDialogs::ButtonType::Ok, 0, 0, 0, Translate("Verify that there´s enough room for the MPH to not crash the balance"), safeMPHPicFilename, 450);
  }
}

private function A_Setup_TipSequences(  ) void {
  SeqCopySequence(_tips_LowVolume, ML_STAR.Tips_LT);
  SeqCopySequence(_tips_LowVolumeFilter, ML_STAR.Tips_LTF);
  SeqCopySequence(_tips_50uL, ML_STAR.Tips_50);
  SeqCopySequence(_tips_50uLFilter, ML_STAR.Tips_50_F);
  SeqCopySequence(_tips_StandardVolume, ML_STAR.Tips_ST);
  SeqCopySequence(_tips_StandardVolumeFilter, ML_STAR.Tips_STF);
  SeqCopySequence(_tips_HighVolume, ML_STAR.Tips_HT);
  SeqCopySequence(_tips_HighVolumeFilter, ML_STAR.Tips_HTF);
  SeqCopySequence(_tips_5mL, ML_STAR.Tips_5mL);
  SeqCopySequence(_tips_4mLFilter, ML_STAR.Tips_4mLFilter);
  SeqCopySequence(_tipAdapter96_HighVolume, ML_STAR.Core96_TipSupport_HT_L_0001);
  SeqCopySequence(_tipAdapter96_StandardVolume, ML_STAR.Core96_TipSupport_ST_L_0001);
  SeqCopySequence(_tipAdapter96_50uL, ML_STAR.Core96_TipSupport_50ulTip_L_0001);
  SeqCopySequence(_tipAdapter96_50uLFilter, ML_STAR.Core96_TipSupport_50ulTipFilter_L_0001);
}

private function EjectTips_96(  ) void {
  LVK::ReportNewBalanceStatus(Translate("Ejecting Tips..."));
  if (xml_returnTips == 0)
  {
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    tipsOn = 0;
    SeqIncrement(_tipAdapter96, 1);
  }
  else
  {
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    tipsOn = 0;
    if (xml_reUseTips == 0)
    {
      SeqIncrement(_tipAdapter96, 1);
    }
  }
  TipCount::Write2(_tipAdapter96, tipCounter_adapter96, ML_STAR);
  LVK::ReportNewBalanceStatus(Translate(""));
}

private function Pipette_5mLChannels(  ) void {
  private variable loopCounter_Main;
  private variable channelIndex;
  private variable doTipEject;
  private variable loopCounter_Channels;
  private variable currentChannel;
  private variable dispenseModeBlowout;
  private variable doTipPickUp;
  private variable loopCounter1;
  private variable msg;
  private variable weightMeasured;
  private variable disp_with_LLD;
  private variable strAsp_cLLD_pLLD;
  private variable tmpPos;
  private variable loopCounter_PipettingCycles;
  private variable arraySingleChannelPatterns[];
  doTipPickUp = 1;
  doTipEject = 1;
  CreateSinglechnPatternsArray_FromChnPatternAll(channelPattern_AllChannels, numActiveChannels, arraySingleChannelPatterns);
  Util2::Debug::TraceArray(Translate("Array of channel patterns"), arraySingleChannelPatterns);
  Trace("number of active chn= ", numActiveChannels);
  aspVolume= xml_asp_volume + (xml_disp_preVolume*xml_preDispenseCycles) + (xml_disp_preVolume*xml_postDispenseCycles);
  tipsOn = 0;
  startingTipsPosition_Run = _tips.GetCurrentPosition();
  developmentModeCycleCounter = 1;
  {
    loopCounter_Main = 0;
    while (1 == 1)
    {
      loopCounter_Main = loopCounter_Main + 1;
      arrayDevMeasures.SetSize(0);
      {
        for(loopCounter_Channels = 0; loopCounter_Channels < numActiveChannels;)
        {
          loopCounter_Channels = loopCounter_Channels + 1;
          channelPattern=arraySingleChannelPatterns.GetAt(loopCounter_Channels-1);
          if(0){
            Trace(">>>>>>>>>>>>> channel pattern=", channelPattern , "<<<<<<<<<<<<<<<<<");
          }
          {
            for(loopCounter_PipettingCycles = 0; loopCounter_PipettingCycles < xml_cycleCount;)
            {
              loopCounter_PipettingCycles = loopCounter_PipettingCycles + 1;
              GetChannelIndexFromPattern(channelPattern, channelIndex);
              Trace("*********************************************************************");
              Trace("Channel #=", channelIndex, "  ,  Pipetting cycle =", loopCounter_PipettingCycles);
              Trace("*********************************************************************");
              if (xml_ADC == 1)
              {
                HSLML_STAR::AntiDropletControl_1000ulChannel_On(ML_STAR);
              }
              if (xml_keepTips == 0)
              {
                doTipPickUp = 1;
              }
              if (xml_keepTips == 1)
              {
                doTipPickUp = 0;
              }
              if (loopCounter_PipettingCycles == 1)
              {
                if (loopCounter_Main == 1)
                {
                  doTipPickUp = 1;
                }
              }
              if (doTipPickUp == 1)
              {
                tmpPos = _tips.GetCurrentPosition();
                if (tmpPos == 0)
                {
                  EditTips_Channels();
                }
                LVK::ReportNewBalanceStatus(Translate("Tip pick up..."));
                ML_STAR._AFA41E7B_21AC_4a24_804E_41716114FEC3("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"); // XLTipPickUp
                tipsOn = 1;
                if (testMode == "development")
                {
                  if (xml_keepTips == 0)
                  {
                    startingTipsPosition_Channel = _tips.GetCurrentPosition();
                  }
                  SeqIncrement(_tips, 1);
                  TipCount::Write2(_tips, tipCounter, ML_STAR);
                }
              }
              LVK::ReportNewBalanceStatus(Translate("Aspirating..."));
              strAsp_cLLD_pLLD = StrConcat2(xml_asp_cLLD, xml_asp_pLLD);
              if (strAsp_cLLD_pLLD == "10")
              {
                ML_STAR._F55EBC5A_143B_42db_9C96_CA7F32116EC3("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"); // XLAspirate
              }
              if (strAsp_cLLD_pLLD == "11")
              {
                ML_STAR._F55EBC5A_143B_42db_9C96_CA7F32116EC3("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"); // XLAspirate
              }
              if (strAsp_cLLD_pLLD == "01")
              {
                ML_STAR._F55EBC5A_143B_42db_9C96_CA7F32116EC3("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"); // XLAspirate
              }
              if (strAsp_cLLD_pLLD == "00")
              {
                ML_STAR._F55EBC5A_143B_42db_9C96_CA7F32116EC3("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"); // XLAspirate
              }
              if (dispenseType_JetSurface == "Jet")
              {
                disp_with_LLD = 0;
              }
              else
              {
                if (xml_disp_cLLD == 1)
                {
                  disp_with_LLD = 1;
                }
                else
                {
                  disp_with_LLD = 0;
                }
              }
              {
                for(loopCounter1 = 0; loopCounter1 < xml_preDispenseCycles;)
                {
                  loopCounter1 = loopCounter1 + 1;
                  msg = StrConcat2(Translate("Pre-Dispense #"), loopCounter1);
                  LVK::ReportNewBalanceStatus(msg);
                  Trace("Channel=", channelPattern, "  ,  Pre-Dispense # =", loopCounter1);
                  if (disp_with_LLD == 0)
                  {
                    ML_STAR._DB24FA21_F138_4eba_8AF5_944D18F02E60("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"); // XlDispense
                  }
                  else
                  {
                    ML_STAR._DB24FA21_F138_4eba_8AF5_944D18F02E60("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"); // XlDispense
                  }
                }
              }
              {
                for(loopCounter1 = 0; loopCounter1 < xml_dispenseCycles;)
                {
                  loopCounter1 = loopCounter1 + 1;
                  msg = StrConcat2(Translate("Dispense #"), loopCounter1);
                  LVK::ReportNewBalanceStatus(msg);
                  Trace("Channel=", channelPattern, "  ,  Dispense # =", loopCounter1);
                  if (xml_postDispenseCycles == 0)
                  {
                    if (loopCounter1 == xml_dispenseCycles)
                    {
                      if (xml_ADC == 1)
                      {
                        HSLML_STAR::AntiDropletControl_1000ulChannel_Off(ML_STAR);
                      }
                    }
                  }
                  Zero_Balance();
                  dispenseModeBlowout = 8;
                  if (xml_postDispenseCycles == 0)
                  {
                    if (loopCounter1 == xml_dispenseCycles)
                    {
                      dispenseModeBlowout = 9;
                    }
                  }
                  if (disp_with_LLD == 0)
                  {
                    ML_STAR._DB24FA21_F138_4eba_8AF5_944D18F02E60("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"); // XlDispense
                  }
                  else
                  {
                    ML_STAR._DB24FA21_F138_4eba_8AF5_944D18F02E60("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"); // XlDispense
                  }
                  Measure_Balance(weightMeasured);
                  currentChannel = StrFind(channelPattern, Translate("1"));
                  currentChannel = currentChannel + 1;
                  if (testMode == "development")
                  {
                    ReportMeasuredData(weightMeasured, currentChannel, loopCounter1, developmentModeCycleCounter);
                    arrayDevMeasures.AddAsLast(weightMeasured);
                    RecordWeightForDevelopment(developmentModeCycleCounter, loopCounter1, xml_disp_volume, weightMeasured, currentChannel);
                  }
                  else
                  {
                    ReportMeasuredData(weightMeasured, currentChannel, loopCounter1, loopCounter_PipettingCycles);
                  }
                }
              }
              {
                for(loopCounter1 = 0; loopCounter1 < xml_postDispenseCycles;)
                {
                  loopCounter1 = loopCounter1 + 1;
                  msg = StrConcat2(Translate("Post-Dispense #"), loopCounter1);
                  LVK::ReportNewBalanceStatus(msg);
                  Trace("Channel=", channelPattern, "  ,  Post-Dispense # =", loopCounter1);
                  if (loopCounter1 == xml_postDispenseCycles)
                  {
                    if (xml_ADC == 1)
                    {
                      HSLML_STAR::AntiDropletControl_1000ulChannel_Off(ML_STAR);
                    }
                  }
                  dispenseModeBlowout = 8;
                  if (loopCounter1 == xml_postDispenseCycles)
                  {
                    dispenseModeBlowout = 9;
                  }
                  if (disp_with_LLD == 0)
                  {
                    ML_STAR._DB24FA21_F138_4eba_8AF5_944D18F02E60("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"); // XlDispense
                  }
                  else
                  {
                    ML_STAR._DB24FA21_F138_4eba_8AF5_944D18F02E60("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"); // XlDispense
                  }
                }
              }
              doTipEject = 0;
              if (xml_keepTips == 0)
              {
                doTipEject = 1;
              }
              else
              {
                if (loopCounter_PipettingCycles == xml_cycleCount)
                {
                  if (testMode == "validation")
                  {
                    doTipEject = 1;
                  }
                  else
                  {
                    if (numActiveChannels > 1000)
                    {
                      doTipEject = 1;
                    }
                  }
                }
              }
              if (doTipEject == 1)
              {
                EjectTips();
              }
              if (loopCounter_PipettingCycles == xml_cycleCount)
              {
                if (xml_returnTips == 1)
                {
                  if (xml_reUseTips == 1)
                  {
                    SeqIncrement(_tips, 1);
                    TipCount::Write2(_tips, tipCounter, ML_STAR);
                  }
                }
              }
            }
          }
        }
      }
      if (testMode == "development")
      {
        RollBack_LiquidClassChanges();
        developmentModeCycleCounter = developmentModeCycleCounter + 1;
        LVK::ReportCycleComplete();
      }
      if (testMode == "validation")
      {
        break;
      }
      if (xml_reUseTips == 1)
      {
        _tips.SetCurrentPosition(startingTipsPosition_Run);
      }
    }
  }
}

private function EjectTips_5mL(  ) void {
  private variable currentTipsPosition;
  LVK::ReportNewBalanceStatus(Translate("Ejecting Tips..."));
  if (testMode == "validation")
  {
    if (xml_returnTips == 0)
    {
      ML_STAR._7F970BA7_528E_4283_807A_325DED0C065A("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"); // XLTipEject
      tipsOn = 0;
      SeqIncrement(_tips, 1);
    }
    else
    {
      ML_STAR._7F970BA7_528E_4283_807A_325DED0C065A("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"); // XLTipEject
      tipsOn = 0;
      if (xml_reUseTips == 0)
      {
        SeqIncrement(_tips, 1);
      }
    }
  }
  else
  {
    if (xml_keepTips == 1)
    {
      channelPattern = channelPattern_AllChannels;
      currentTipsPosition = _tips.GetCurrentPosition();
      _tips.SetCurrentPosition(startingTipsPosition_Run);
    }
    if (xml_returnTips == 0)
    {
      ML_STAR._7F970BA7_528E_4283_807A_325DED0C065A("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"); // XLTipEject
      tipsOn = 0;
      if (xml_keepTips == 1)
      {
        _tips.SetCurrentPosition(currentTipsPosition);
      }
    }
    else
    {
      if (xml_keepTips == 0)
      {
        currentTipsPosition = _tips.GetCurrentPosition();
        _tips.SetCurrentPosition(startingTipsPosition_Channel);
      }
      ML_STAR._7F970BA7_528E_4283_807A_325DED0C065A("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"); // XLTipEject
      tipsOn = 0;
      if (xml_reUseTips == 0)
      {
        _tips.SetCurrentPosition(currentTipsPosition);
      }
    }
  }
  TipCount::Write2(_tips, tipCounter, ML_STAR);
  LVK::ReportNewBalanceStatus(Translate(""));
}

private function EditTips_DiscardTipsInTipAdapter( variable tipAdapterType ) void {
  private variable arrPicsGroupName[];
  private variable arrPicsTooltips[];
  private variable arrPicsHeight[];
  private variable arrPicsWidth[];
  private variable arrImgSource[];
  private variable arrIsEditable[];
  private variable arrPicsLabels[];
  private variable arrImgIsSelected[];
  private variable labID;
  private file file1;
  private variable posID;
  private variable loopCounter4;
  private variable lastPosition;
  private variable retVal;
  private variable blnReturnToPickup;
  blnReturnToPickup = 1;
  retVal = FilSearchPath(file_lastTipPickup96);
  if (retVal == "")
  {
    blnReturnToPickup = 0;
  }
  onerror goto errLabel_3 ;
  err.Clear();
  file1.AddField(1, labID, hslString);
  file1.SetDelimiter(hslAsciiText);
  if( 0 == file1.Open(file_lastTipPickup96, hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, file_lastTipPickup96, "HxMetEdCompCmd");
  }
  if( 0 == file1.ReadRecord() )
  {
        MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  if (labID == "")
  {
    blnReturnToPickup = 0;
  }
  errLabel_3 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    blnReturnToPickup = 0;
    onerror goto errLabel_4 ;
    err.Clear();
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    errLabel_4 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
  }   /* end if from skip handler if no error */
  arrPicsLabels.SetSize(0);
  arrPicsLabels.AddAsLast(Translate("Discard to waste"));
  arrPicsLabels.AddAsLast(Translate("Return to pick-up position (tip rack)"));
  arrPicsLabels.AddAsLast(Translate("Leave tips in the adapter"));
  arrPicsTooltips.SetSize(0);
  arrPicsTooltips.AddAsLast(Translate("Discard to waste"));
  arrPicsTooltips.AddAsLast(Translate("Return to pick-up position (tip rack)"));
  arrPicsTooltips.AddAsLast(Translate("Leave tips in the adapter"));
  arrIsEditable.SetSize(0);
  arrIsEditable.AddAsLast(1);
  arrIsEditable.AddAsLast(blnReturnToPickup);
  arrIsEditable.AddAsLast(1);
  arrImgSource.SetSize(0);
  arrImgSource.AddAsLast(wastePicFilename);
  arrImgSource.AddAsLast(tipRacksPicFilename);
  arrImgSource.AddAsLast(tipAdapterPicFilename);
  arrPicsHeight.SetSize(0);
  arrPicsHeight.AddAsLast(250);
  arrPicsHeight.AddAsLast(250);
  arrPicsHeight.AddAsLast(250);
  arrPicsWidth.SetSize(0);
  arrPicsWidth.AddAsLast(250);
  arrPicsWidth.AddAsLast(250);
  arrPicsWidth.AddAsLast(250);
  arrImgIsSelected.SetSize(0);
  arrImgIsSelected.AddAsLast(1);
  arrImgIsSelected.AddAsLast(0);
  arrImgIsSelected.AddAsLast(0);
  arrPicsGroupName.SetSize(0);
  arrPicsGroupName.AddAsLast(Translate("Options"));
  arrPicsGroupName.AddAsLast(Translate("Options"));
  arrPicsGroupName.AddAsLast(Translate("Options"));
  AswStandardDialogs::ImageRadioButtonDialog(Translate("Remove tips from tip adapter"), AswStandardDialogs::ButtonType::Ok, 0, 0, Translate("Select the destination for the tips in the adapter"), Translate(""), arrPicsLabels, arrPicsTooltips, arrIsEditable, arrImgSource, arrPicsHeight, arrPicsWidth, arrImgIsSelected, arrPicsGroupName, 1, 0);
  if (tipAdapterType == 1)
  {
    _tipAdapter96.SetCurrentPosition(1);
    if (arrImgIsSelected.ElementAt( 1 -1) == 1)
    {
      LVK::ReportNewBalanceStatus(Translate("Tip pick up..."));
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      LVK::ReportNewBalanceStatus(Translate("Ejecting tips..."));
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    if (arrImgIsSelected.ElementAt( 2 -1) == 1)
    {
      if (blnReturnToPickup == 1)
      {
        SeqCopySequence(tempTips, _tips);
        SeqRemoveAll(tempTips);
        {
          for(loopCounter4 = 0; loopCounter4 < 96;)
          {
            loopCounter4 = loopCounter4 + 1;
            posID = StrIStr(loopCounter4);
            SeqAdd(tempTips, labID, posID);
          }
        }
        tempTips.SetCurrentPosition(1);
        lastPosition = SeqGetTotal(tempTips);
        SeqEdit(tempTips, ML_STAR, Translate("Confirm that the destination rack is EMPTY"), Translate("Confirm that the destination rack is EMPTY !!!!!!!!!"), 5000, 0, 1, lastPosition, 0, Translate(""));
        LVK::ReportNewBalanceStatus(Translate("Tip pick up..."));
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        LVK::ReportNewBalanceStatus(Translate("Ejecting tips..."));
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      }
    }
    if (arrImgIsSelected.ElementAt( 3 -1) == 1)
    {
    }
    TipCount::Write2(_tipAdapter96, tipCounter_adapter96, ML_STAR);
  }
}

private function TerminateAll(  ) void {
  private variable blnSuccess;
  if (tipsOn == 1)
  {
    if (pipettingTool == 1)
    {
      EjectTips();
    }
    if (pipettingTool == 2)
    {
      EjectTips_96();
    }
  }
  if (pipettingTool == 2)
  {
    EditTips_DiscardTipsInTipAdapter(1);
  }
  LVK::ReportNewBalanceStatus(Translate(""));
  if (glSimulationCheck == 0)
  {
    blnSuccess = METTLER_WXS::Terminate();
    HandleReturnValue(blnSuccess, "METTLER_WXS::Terminate");
  }
  AswStandardDialogs::Terminate();
  LVK::Disconnect();
}

private function HandleReturnValue( variable i_blnSuccess, variable i_strFunctionName ) void {
  private dialog dialogHandle_5;
  private variable blnSuccess;
  if (i_blnSuccess == 1)
  {
    return;
  }
  dialogHandle_5.SetOutput(Translate("The following fuction returned unsuccessful:\n\n"), i_strFunctionName, Translate("\n\nThe Method will be aborted"));
  dialogHandle_5.ShowOutput(Translate("Error executing function"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  blnSuccess = METTLER_WXS::Terminate();
  if (blnSuccess == 0)
  {
    TRACELEVEL::Release_Trace2("Unable to terminate scale", "");
  }
  abort;
}

private function RollBack_LiquidClassChanges(  ) void {
  private variable dispMixRate;
  private variable runStartDate;
  private variable dispStopBackVolume;
  private variable dispStopFlowRate;
  private variable retVal;
  private variable dispFlowRate;
  private variable aspSwapSpeed;
  private variable aspMixRate;
  private variable liqClassHasChanged;
  private variable row;
  private variable arraySize;
  private variable recordsCounter;
  private variable aspFlowRate;
  private variable aspAirTransVolume;
  private variable volumeStdDev;
  private variable dispSetlingTime;
  private variable totalTestCounter;
  private variable volumeAverage;
  private variable aspOverAspVolume;
  private variable str;
  private variable loopCounter2;
  private variable aspBlowOutVolume;
  private variable loopCounter3;
  private variable numberOfRows;
  private variable dispBlowOutVolume;
  private variable aspSettlingTime;
  private variable dispAirTransVolume;
  private variable loopCounter4;
  private variable itemSelected;
  private variable dispSwapSpeed;
  private variable volumeCV;
  private variable time;
  private variable aspClotRetractHeight;
  private file RESULT_FILE;
  private variable arrayStrList[];
  private variable arrayLCParamsPrevCycle[];
  private variable arrayLCParamsCurrentCycle[];
  retVal = FilSearchPath(tmpDevLiqClassExcel);
  totalTestCounter = developmentModeCycleCounter;
  time = TimGetFormattedTime(Translate("%H:%M:%S"));
  runStartDate = TimGetFormattedDate("%b-%d-%y");
  volumeAverage = HSLStatisitics::Stat_Average(arrayDevMeasures);
  volumeAverage = MthRound(volumeAverage, 2);
  volumeStdDev = HSLStatisitics::Stat_StdDeviation(arrayDevMeasures);
  volumeCV = 100 * volumeStdDev;
  volumeCV = volumeCV / volumeAverage;
  volumeCV = MthRound(volumeCV, 1);
  volumeAverage = volumeAverage / (xml_liquidDensity * 1.0);
  volumeAverage = MthRound(volumeAverage, 1);
  LiquidClassLib::SelectLiquidClass(xml_liquidClass);
  aspAirTransVolume = LiquidClassLib::GetLiquidClassAspirateParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_ASP::AirTransportVolume);
  aspBlowOutVolume = LiquidClassLib::GetLiquidClassAspirateParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_ASP::BlowOutVolume);
  aspClotRetractHeight = LiquidClassLib::GetLiquidClassAspirateParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_ASP::ClotRetractHeight);
  aspFlowRate = LiquidClassLib::GetLiquidClassAspirateParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_ASP::FlowRate);
  aspMixRate = LiquidClassLib::GetLiquidClassAspirateParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_ASP::MixFlowRate);
  aspOverAspVolume = LiquidClassLib::GetLiquidClassAspirateParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_ASP::OverAspirateVolume);
  aspSettlingTime = LiquidClassLib::GetLiquidClassAspirateParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_ASP::SettlingTime);
  aspSwapSpeed = LiquidClassLib::GetLiquidClassAspirateParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_ASP::SwapSpeed);
  dispAirTransVolume = LiquidClassLib::GetLiquidClassDispenseParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_DISP::AirTransportVolume);
  dispBlowOutVolume = LiquidClassLib::GetLiquidClassDispenseParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_DISP::BlowOutVolume);
  dispFlowRate = LiquidClassLib::GetLiquidClassDispenseParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_DISP::FlowRate);
  dispMixRate = LiquidClassLib::GetLiquidClassDispenseParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_DISP::MixFlowRate);
  dispSetlingTime = LiquidClassLib::GetLiquidClassDispenseParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_DISP::SettlingTime);
  dispStopBackVolume = LiquidClassLib::GetLiquidClassDispenseParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_DISP::StopBackVolume);
  dispStopFlowRate = LiquidClassLib::GetLiquidClassDispenseParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_DISP::StopFlowRate);
  dispSwapSpeed = LiquidClassLib::GetLiquidClassDispenseParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_DISP::SwapSpeed);
  if (retVal == "")
  {
    RESULT_FILE.AddField("Date", runStartDate, hslString, 255);
    RESULT_FILE.AddField("Time", time, hslString, 255);
    RESULT_FILE.AddField("Pipetting Cycle", totalTestCounter, hslInteger);
    RESULT_FILE.AddField("Average (uL)", volumeAverage, hslFloat);
    RESULT_FILE.AddField("CV (%)", volumeCV, hslFloat);
    RESULT_FILE.AddField("Aspiration Flow Rate", aspFlowRate, hslFloat);
    RESULT_FILE.AddField("Aspiration Mix Rate", aspMixRate, hslFloat);
    RESULT_FILE.AddField("Aspiration Air Transport Volume", aspAirTransVolume, hslFloat);
    RESULT_FILE.AddField("Aspiration Blow Out Volume", aspBlowOutVolume, hslFloat);
    RESULT_FILE.AddField("Aspiration Swap Speed", aspSwapSpeed, hslFloat);
    RESULT_FILE.AddField("Aspiration Settling Time", aspSettlingTime, hslFloat);
    RESULT_FILE.AddField("Over Aspirate Volume", aspOverAspVolume, hslFloat);
    RESULT_FILE.AddField("Clot Retract Height", aspClotRetractHeight, hslFloat);
    RESULT_FILE.AddField("Dispense Flow Rate", dispFlowRate, hslFloat);
    RESULT_FILE.AddField("Dispense Mix Rate", dispMixRate, hslFloat);
    RESULT_FILE.AddField("Dispense Air Transport Volume", dispAirTransVolume, hslFloat);
    RESULT_FILE.AddField("Dispense Blow Out Volume", dispBlowOutVolume, hslFloat);
    RESULT_FILE.AddField("Dispense Swap Speed", dispSwapSpeed, hslFloat);
    RESULT_FILE.AddField("Dispense Settling Time", dispSetlingTime, hslFloat);
    RESULT_FILE.AddField("Stop Flow Rate", dispStopFlowRate, hslFloat);
    RESULT_FILE.AddField("Stop Back Volume", dispStopBackVolume, hslFloat);
    if( 0 == RESULT_FILE.Open(tmpDevLiqClassExcel + " " + "Results", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, tmpDevLiqClassExcel, "HxMetEdCompCmd");
    }
  }
  else
  {
    RESULT_FILE.AddField("Date", runStartDate, hslString, 255);
    RESULT_FILE.AddField("Time", time, hslString, 255);
    RESULT_FILE.AddField("Pipetting Cycle", totalTestCounter, hslInteger);
    RESULT_FILE.AddField("Average (uL)", volumeAverage, hslFloat);
    RESULT_FILE.AddField("CV (%)", volumeCV, hslFloat);
    RESULT_FILE.AddField("Aspiration Flow Rate", aspFlowRate, hslFloat);
    RESULT_FILE.AddField("Aspiration Mix Rate", aspMixRate, hslFloat);
    RESULT_FILE.AddField("Aspiration Air Transport Volume", aspAirTransVolume, hslFloat);
    RESULT_FILE.AddField("Aspiration Blow Out Volume", aspBlowOutVolume, hslFloat);
    RESULT_FILE.AddField("Aspiration Swap Speed", aspSwapSpeed, hslFloat);
    RESULT_FILE.AddField("Aspiration Settling Time", aspSettlingTime, hslFloat);
    RESULT_FILE.AddField("Over Aspirate Volume", aspOverAspVolume, hslFloat);
    RESULT_FILE.AddField("Clot Retract Height", aspClotRetractHeight, hslFloat);
    RESULT_FILE.AddField("Dispense Flow Rate", dispFlowRate, hslFloat);
    RESULT_FILE.AddField("Dispense Mix Rate", dispMixRate, hslFloat);
    RESULT_FILE.AddField("Dispense Air Transport Volume", dispAirTransVolume, hslFloat);
    RESULT_FILE.AddField("Dispense Blow Out Volume", dispBlowOutVolume, hslFloat);
    RESULT_FILE.AddField("Dispense Swap Speed", dispSwapSpeed, hslFloat);
    RESULT_FILE.AddField("Dispense Settling Time", dispSetlingTime, hslFloat);
    RESULT_FILE.AddField("Stop Flow Rate", dispStopFlowRate, hslFloat);
    RESULT_FILE.AddField("Stop Back Volume", dispStopBackVolume, hslFloat);
    if( 0 == RESULT_FILE.Open(tmpDevLiqClassExcel + " " + "Results$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, tmpDevLiqClassExcel, "HxMetEdCompCmd");
    }
  }
  if( 0 == RESULT_FILE.WriteRecord() )
  {
        MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 != RESULT_FILE.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  RESULT_FILE.RemoveFields();
  if (developmentModeCycleCounter > 1)
  {
    arrayLCParamsPrevCycle.SetSize(0);
    arrayLCParamsCurrentCycle.SetSize(0);
    RESULT_FILE.AddField("Date", runStartDate, hslString, 255);
    RESULT_FILE.AddField("Time", time, hslString, 255);
    RESULT_FILE.AddField("Pipetting Cycle", totalTestCounter, hslInteger);
    RESULT_FILE.AddField("Average (uL)", volumeAverage, hslString, 255);
    RESULT_FILE.AddField("CV (%)", volumeCV, hslString, 255);
    RESULT_FILE.AddField("Aspiration Flow Rate", aspFlowRate, hslFloat);
    RESULT_FILE.AddField("Aspiration Mix Rate", aspMixRate, hslFloat);
    RESULT_FILE.AddField("Aspiration Air Transport Volume", aspAirTransVolume, hslFloat);
    RESULT_FILE.AddField("Aspiration Blow Out Volume", aspBlowOutVolume, hslFloat);
    RESULT_FILE.AddField("Aspiration Swap Speed", aspSwapSpeed, hslFloat);
    RESULT_FILE.AddField("Aspiration Settling Time", aspSettlingTime, hslFloat);
    RESULT_FILE.AddField("Over Aspirate Volume", aspOverAspVolume, hslFloat);
    RESULT_FILE.AddField("Clot Retract Height", aspClotRetractHeight, hslFloat);
    RESULT_FILE.AddField("Dispense Flow Rate", dispFlowRate, hslFloat);
    RESULT_FILE.AddField("Dispense Mix Rate", dispMixRate, hslFloat);
    RESULT_FILE.AddField("Dispense Air Transport Volume", dispAirTransVolume, hslFloat);
    RESULT_FILE.AddField("Dispense Blow Out Volume", dispBlowOutVolume, hslFloat);
    RESULT_FILE.AddField("Dispense Swap Speed", dispSwapSpeed, hslFloat);
    RESULT_FILE.AddField("Dispense Settling Time", dispSetlingTime, hslFloat);
    RESULT_FILE.AddField("Stop Flow Rate", dispStopFlowRate, hslFloat);
    RESULT_FILE.AddField("Stop Back Volume", dispStopBackVolume, hslFloat);
    if( 0 == RESULT_FILE.Open(tmpDevLiqClassExcel + " " + "Results$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, tmpDevLiqClassExcel, "HxMetEdCompCmd");
    }
    RESULT_FILE.Seek(-1, hslLast);
    if( 0 == RESULT_FILE.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    arrayLCParamsPrevCycle.AddAsLast(aspAirTransVolume);
    arrayLCParamsPrevCycle.AddAsLast(aspBlowOutVolume);
    arrayLCParamsPrevCycle.AddAsLast(aspClotRetractHeight);
    arrayLCParamsPrevCycle.AddAsLast(aspFlowRate);
    arrayLCParamsPrevCycle.AddAsLast(aspMixRate);
    arrayLCParamsPrevCycle.AddAsLast(aspOverAspVolume);
    arrayLCParamsPrevCycle.AddAsLast(aspSettlingTime);
    arrayLCParamsPrevCycle.AddAsLast(aspSwapSpeed);
    arrayLCParamsPrevCycle.AddAsLast(dispAirTransVolume);
    arrayLCParamsPrevCycle.AddAsLast(dispBlowOutVolume);
    arrayLCParamsPrevCycle.AddAsLast(dispFlowRate);
    arrayLCParamsPrevCycle.AddAsLast(dispMixRate);
    arrayLCParamsPrevCycle.AddAsLast(dispSetlingTime);
    arrayLCParamsPrevCycle.AddAsLast(dispStopBackVolume);
    arrayLCParamsPrevCycle.AddAsLast(dispStopFlowRate);
    arrayLCParamsPrevCycle.AddAsLast(dispSwapSpeed);
    if( 0 == RESULT_FILE.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    arrayLCParamsCurrentCycle.AddAsLast(aspAirTransVolume);
    arrayLCParamsCurrentCycle.AddAsLast(aspBlowOutVolume);
    arrayLCParamsCurrentCycle.AddAsLast(aspClotRetractHeight);
    arrayLCParamsCurrentCycle.AddAsLast(aspFlowRate);
    arrayLCParamsCurrentCycle.AddAsLast(aspMixRate);
    arrayLCParamsCurrentCycle.AddAsLast(aspOverAspVolume);
    arrayLCParamsCurrentCycle.AddAsLast(aspSettlingTime);
    arrayLCParamsCurrentCycle.AddAsLast(aspSwapSpeed);
    arrayLCParamsCurrentCycle.AddAsLast(dispAirTransVolume);
    arrayLCParamsCurrentCycle.AddAsLast(dispBlowOutVolume);
    arrayLCParamsCurrentCycle.AddAsLast(dispFlowRate);
    arrayLCParamsCurrentCycle.AddAsLast(dispMixRate);
    arrayLCParamsCurrentCycle.AddAsLast(dispSetlingTime);
    arrayLCParamsCurrentCycle.AddAsLast(dispStopBackVolume);
    arrayLCParamsCurrentCycle.AddAsLast(dispStopFlowRate);
    arrayLCParamsCurrentCycle.AddAsLast(dispSwapSpeed);
    arraySize=arrayLCParamsPrevCycle.GetSize();
    liqClassHasChanged = 0;
    {
      for(loopCounter2 = 0; loopCounter2 < arraySize;)
      {
        loopCounter2 = loopCounter2 + 1;
        if (arrayLCParamsCurrentCycle.ElementAt( loopCounter2 -1) != arrayLCParamsPrevCycle.ElementAt( loopCounter2 -1))
        {
          liqClassHasChanged = 1;
          TrcTrace8(Translate("Current Cycle Param = "), arrayLCParamsCurrentCycle.ElementAt( loopCounter2 -1), Translate("  , Prev Cycle Param = "), arrayLCParamsPrevCycle.ElementAt( loopCounter2 -1), Translate(""), Translate(""), Translate(""), Translate(""));
          break;
        }
      }
    }
    if( 0 != RESULT_FILE.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    RESULT_FILE.RemoveFields();
    if (liqClassHasChanged == 1)
    {
      RESULT_FILE.AddField("Date", runStartDate, hslString, 255);
      RESULT_FILE.AddField("Time", time, hslString, 255);
      RESULT_FILE.AddField("Pipetting Cycle", totalTestCounter, hslInteger);
      RESULT_FILE.AddField("Average (uL)", volumeAverage, hslString, 255);
      RESULT_FILE.AddField("CV (%)", volumeCV, hslString, 255);
      if( 0 == RESULT_FILE.Open(tmpDevLiqClassExcel + " " + "Results$", hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, tmpDevLiqClassExcel, "HxMetEdCompCmd");
      }
      arrayStrList.SetSize(0);
      numberOfRows = RESULT_FILE.Seek(0, hslLast);
      recordsCounter = 0;
      {
        for(loopCounter3 = 0; loopCounter3 < numberOfRows;)
        {
          loopCounter3 = loopCounter3 + 1;
          row = numberOfRows - loopCounter3;
          if (row < 0)
          {
            break;
          }
          RESULT_FILE.Seek(row, hslFirst);
          if( 0 == RESULT_FILE.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          str = StrConcat12(Translate("Cycle="), totalTestCounter, Translate(" , "), Translate("CV%="), volumeCV, Translate(" , "), Translate("Average(uL)= "), volumeAverage, Translate(" , "), runStartDate, Translate("  "), time);
          arrayStrList.AddAsLast(str);
          recordsCounter = recordsCounter + 1;
          if (recordsCounter >= 21)
          {
            break;
          }
        }
      }
      if( 0 != RESULT_FILE.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      RESULT_FILE.RemoveFields();
      retVal = AswStandardDialogs::ListSelectDialog(Translate("Liquid class has changed in last cycle:    Do you want to Rollback ?"), AswStandardDialogs::ButtonType::AcceptCancel, 600, 750, Translate("Select pipetting cycle to rollback liquid class parameters or press CANCEL to keep last changes"), Translate("Select pipetting cycle to rollback liquid class parameters or press CANCEL to keep last changes"), arrayStrList, itemSelected);
      if (retVal == 1)
      {
        arraySize=arrayStrList.GetSize();
        {
          for(loopCounter4 = 0; loopCounter4 < arraySize;)
          {
            loopCounter4 = loopCounter4 + 1;
            if (itemSelected == arrayStrList.ElementAt( loopCounter4 -1))
            {
              RESULT_FILE.AddField("Date", runStartDate, hslString, 255);
              RESULT_FILE.AddField("Time", time, hslString, 255);
              RESULT_FILE.AddField("Pipetting Cycle", totalTestCounter, hslInteger);
              RESULT_FILE.AddField("Average (uL)", volumeAverage, hslString, 255);
              RESULT_FILE.AddField("CV (%)", volumeCV, hslString, 255);
              RESULT_FILE.AddField("Aspiration Flow Rate", aspFlowRate, hslFloat);
              RESULT_FILE.AddField("Aspiration Mix Rate", aspMixRate, hslFloat);
              RESULT_FILE.AddField("Aspiration Air Transport Volume", aspAirTransVolume, hslFloat);
              RESULT_FILE.AddField("Aspiration Blow Out Volume", aspBlowOutVolume, hslFloat);
              RESULT_FILE.AddField("Aspiration Swap Speed", aspSwapSpeed, hslFloat);
              RESULT_FILE.AddField("Aspiration Settling Time", aspSettlingTime, hslFloat);
              RESULT_FILE.AddField("Over Aspirate Volume", aspOverAspVolume, hslFloat);
              RESULT_FILE.AddField("Clot Retract Height", aspClotRetractHeight, hslFloat);
              RESULT_FILE.AddField("Dispense Flow Rate", dispFlowRate, hslFloat);
              RESULT_FILE.AddField("Dispense Mix Rate", dispMixRate, hslFloat);
              RESULT_FILE.AddField("Dispense Air Transport Volume", dispAirTransVolume, hslFloat);
              RESULT_FILE.AddField("Dispense Blow Out Volume", dispBlowOutVolume, hslFloat);
              RESULT_FILE.AddField("Dispense Swap Speed", dispSwapSpeed, hslFloat);
              RESULT_FILE.AddField("Dispense Settling Time", dispSetlingTime, hslFloat);
              RESULT_FILE.AddField("Stop Flow Rate", dispStopFlowRate, hslFloat);
              RESULT_FILE.AddField("Stop Back Volume", dispStopBackVolume, hslFloat);
              if( 0 == RESULT_FILE.Open(tmpDevLiqClassExcel + " " + "Results$", hslRead) )
              {
                    MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, tmpDevLiqClassExcel, "HxMetEdCompCmd");
              }
              row = 1 - loopCounter4;
              RESULT_FILE.Seek(row, hslLast);
              if( 0 == RESULT_FILE.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              if( 0 != RESULT_FILE.Close() )
              {
                    MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              RESULT_FILE.RemoveFields();
              LiquidClassLib::SelectLiquidClass(xml_liquidClass);
              LiquidClassLib::SetLiquidClassAspirateParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_ASP::AirTransportVolume, aspAirTransVolume);
              LiquidClassLib::SetLiquidClassAspirateParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_ASP::BlowOutVolume, aspBlowOutVolume);
              LiquidClassLib::SetLiquidClassAspirateParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_ASP::ClotRetractHeight, aspClotRetractHeight);
              LiquidClassLib::SetLiquidClassAspirateParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_ASP::FlowRate, aspFlowRate);
              LiquidClassLib::SetLiquidClassAspirateParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_ASP::MixFlowRate, aspMixRate);
              LiquidClassLib::SetLiquidClassAspirateParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_ASP::OverAspirateVolume, aspOverAspVolume);
              LiquidClassLib::SetLiquidClassAspirateParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_ASP::SettlingTime, aspSettlingTime);
              LiquidClassLib::SetLiquidClassAspirateParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_ASP::SwapSpeed, aspSwapSpeed);
              LiquidClassLib::SetLiquidClassDispenseParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_DISP::AirTransportVolume, dispAirTransVolume);
              LiquidClassLib::SetLiquidClassDispenseParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_DISP::BlowOutVolume, dispBlowOutVolume);
              LiquidClassLib::SetLiquidClassDispenseParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_DISP::FlowRate, dispFlowRate);
              LiquidClassLib::SetLiquidClassDispenseParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_DISP::MixFlowRate, dispMixRate);
              LiquidClassLib::SetLiquidClassDispenseParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_DISP::SettlingTime, dispSetlingTime);
              LiquidClassLib::SetLiquidClassDispenseParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_DISP::StopBackVolume, dispStopBackVolume);
              LiquidClassLib::SetLiquidClassDispenseParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_DISP::StopFlowRate, dispStopFlowRate);
              LiquidClassLib::SetLiquidClassDispenseParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_DISP::SwapSpeed, dispSwapSpeed);
              break;
            }
          }
        }
      }
    }
  }
}

private function RecordWeightForDevelopment( variable pipettingCycle, variable dispenseNumber, variable volume, variable weight, variable channel ) void {
  private variable dispMixRate;
  private variable dispStopBackVolume;
  private variable dispFlowRate;
  private variable dispStopFlowRate;
  private variable retVal;
  private variable aspMixRate;
  private variable aspSwapSpeed;
  private variable aspFlowRate;
  private variable calculatedVolume;
  private variable aspAirTransVolume;
  private variable dispSetlingTime;
  private variable today;
  private variable aspOverAspVolume;
  private variable aspBlowOutVolume;
  private variable dispAirTransVolume;
  private variable dispBlowOutVolume;
  private variable aspSettlingTime;
  private variable dispSwapSpeed;
  private variable aspClotRetractHeight;
  private variable now;
  private file RESULT_FILE;
  Trace("file dev>>>>", tmpDevLiqClassExcel_ThisRunOnly);
  retVal = FilSearchPath(tmpDevLiqClassExcel_ThisRunOnly);
  now = TimGetFormattedTime(Translate("%H:%M:%S"));
  today = TimGetFormattedDate("%b-%d-%y");
  LiquidClassLib::SelectLiquidClass(xml_liquidClass);
  aspAirTransVolume = LiquidClassLib::GetLiquidClassAspirateParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_ASP::AirTransportVolume);
  aspBlowOutVolume = LiquidClassLib::GetLiquidClassAspirateParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_ASP::BlowOutVolume);
  aspClotRetractHeight = LiquidClassLib::GetLiquidClassAspirateParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_ASP::ClotRetractHeight);
  aspFlowRate = LiquidClassLib::GetLiquidClassAspirateParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_ASP::FlowRate);
  aspMixRate = LiquidClassLib::GetLiquidClassAspirateParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_ASP::MixFlowRate);
  aspOverAspVolume = LiquidClassLib::GetLiquidClassAspirateParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_ASP::OverAspirateVolume);
  aspSettlingTime = LiquidClassLib::GetLiquidClassAspirateParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_ASP::SettlingTime);
  aspSwapSpeed = LiquidClassLib::GetLiquidClassAspirateParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_ASP::SwapSpeed);
  dispAirTransVolume = LiquidClassLib::GetLiquidClassDispenseParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_DISP::AirTransportVolume);
  dispBlowOutVolume = LiquidClassLib::GetLiquidClassDispenseParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_DISP::BlowOutVolume);
  dispFlowRate = LiquidClassLib::GetLiquidClassDispenseParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_DISP::FlowRate);
  dispMixRate = LiquidClassLib::GetLiquidClassDispenseParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_DISP::MixFlowRate);
  dispSetlingTime = LiquidClassLib::GetLiquidClassDispenseParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_DISP::SettlingTime);
  dispStopBackVolume = LiquidClassLib::GetLiquidClassDispenseParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_DISP::StopBackVolume);
  dispStopFlowRate = LiquidClassLib::GetLiquidClassDispenseParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_DISP::StopFlowRate);
  dispSwapSpeed = LiquidClassLib::GetLiquidClassDispenseParameter(LiquidClassLib::LIQUIDCLASS_PARAMS_DISP::SwapSpeed);
  calculatedVolume = weight / (xml_liquidDensity * 1.0);
  if (retVal == "")
  {
    RESULT_FILE.AddField("Date", today, hslString, 255);
    RESULT_FILE.AddField("Time", now, hslString, 255);
    RESULT_FILE.AddField("Pipetting Cycle", pipettingCycle, hslInteger);
    RESULT_FILE.AddField("Dispense #", dispenseNumber, hslInteger);
    RESULT_FILE.AddField("Channel", channel, hslString, 255);
    RESULT_FILE.AddField("Volume", calculatedVolume, hslString, 255);
    RESULT_FILE.AddField("Raw Weight", weight, hslFloat);
    RESULT_FILE.AddField("Target Volume", volume, hslString, 255);
    RESULT_FILE.AddField("Density", xml_liquidDensity, hslString, 255);
    RESULT_FILE.AddField("Aspiration Flow Rate", aspFlowRate, hslFloat);
    RESULT_FILE.AddField("Aspiration Mix Rate", aspMixRate, hslFloat);
    RESULT_FILE.AddField("Aspiration Air Transport Volume", aspAirTransVolume, hslFloat);
    RESULT_FILE.AddField("Aspiration Blow Out Volume", aspBlowOutVolume, hslFloat);
    RESULT_FILE.AddField("Aspiration Swap Speed", aspSwapSpeed, hslFloat);
    RESULT_FILE.AddField("Aspiration Settling Time", aspSettlingTime, hslFloat);
    RESULT_FILE.AddField("Over Aspirate Volume", aspOverAspVolume, hslFloat);
    RESULT_FILE.AddField("Clot Retract Height", aspClotRetractHeight, hslFloat);
    RESULT_FILE.AddField("Dispense Flow Rate", dispFlowRate, hslFloat);
    RESULT_FILE.AddField("Dispense Mix Rate", dispMixRate, hslFloat);
    RESULT_FILE.AddField("Dispense Air Transport Volume", dispAirTransVolume, hslFloat);
    RESULT_FILE.AddField("Dispense Blow Out Volume", dispBlowOutVolume, hslFloat);
    RESULT_FILE.AddField("Dispense Swap Speed", dispSwapSpeed, hslFloat);
    RESULT_FILE.AddField("Dispense Settling Time", dispSetlingTime, hslFloat);
    RESULT_FILE.AddField("Stop Flow Rate", dispStopFlowRate, hslFloat);
    RESULT_FILE.AddField("Stop Back Volume", dispStopBackVolume, hslFloat);
    if( 0 == RESULT_FILE.Open(tmpDevLiqClassExcel_ThisRunOnly + " " + "Results", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, tmpDevLiqClassExcel_ThisRunOnly, "HxMetEdCompCmd");
    }
  }
  else
  {
    RESULT_FILE.AddField("Date", today, hslString, 255);
    RESULT_FILE.AddField("Time", now, hslString, 255);
    RESULT_FILE.AddField("Pipetting Cycle", pipettingCycle, hslInteger);
    RESULT_FILE.AddField("Dispense #", dispenseNumber, hslInteger);
    RESULT_FILE.AddField("Channel", channel, hslString, 255);
    RESULT_FILE.AddField("Volume", calculatedVolume, hslString, 255);
    RESULT_FILE.AddField("Raw Weight", weight, hslFloat);
    RESULT_FILE.AddField("Target Volume", volume, hslString, 255);
    RESULT_FILE.AddField("Density", xml_liquidDensity, hslString, 255);
    RESULT_FILE.AddField("Aspiration Flow Rate", aspFlowRate, hslFloat);
    RESULT_FILE.AddField("Aspiration Mix Rate", aspMixRate, hslFloat);
    RESULT_FILE.AddField("Aspiration Air Transport Volume", aspAirTransVolume, hslFloat);
    RESULT_FILE.AddField("Aspiration Blow Out Volume", aspBlowOutVolume, hslFloat);
    RESULT_FILE.AddField("Aspiration Swap Speed", aspSwapSpeed, hslFloat);
    RESULT_FILE.AddField("Aspiration Settling Time", aspSettlingTime, hslFloat);
    RESULT_FILE.AddField("Over Aspirate Volume", aspOverAspVolume, hslFloat);
    RESULT_FILE.AddField("Clot Retract Height", aspClotRetractHeight, hslFloat);
    RESULT_FILE.AddField("Dispense Flow Rate", dispFlowRate, hslFloat);
    RESULT_FILE.AddField("Dispense Mix Rate", dispMixRate, hslFloat);
    RESULT_FILE.AddField("Dispense Air Transport Volume", dispAirTransVolume, hslFloat);
    RESULT_FILE.AddField("Dispense Blow Out Volume", dispBlowOutVolume, hslFloat);
    RESULT_FILE.AddField("Dispense Swap Speed", dispSwapSpeed, hslFloat);
    RESULT_FILE.AddField("Dispense Settling Time", dispSetlingTime, hslFloat);
    RESULT_FILE.AddField("Stop Flow Rate", dispStopFlowRate, hslFloat);
    RESULT_FILE.AddField("Stop Back Volume", dispStopBackVolume, hslFloat);
    if( 0 == RESULT_FILE.Open(tmpDevLiqClassExcel_ThisRunOnly + " " + "Results", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, tmpDevLiqClassExcel_ThisRunOnly, "HxMetEdCompCmd");
    }
  }
  if( 0 == RESULT_FILE.WriteRecord() )
  {
        MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 != RESULT_FILE.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  RESULT_FILE.RemoveFields();
}
