 namespace _Method { #include "HSLInhecoTEC\\HSLInhecoTECLib.hsl" }
 namespace _Method { #include "ASWStandard\\TraceLevel\\TraceLevel.hsl" }
 namespace _Method { #include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
variable _strMethodName;
variable intLoopCounterDevices;
variable intDeviceType;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    private variable blnSuccess;
    private variable strErrorCode;
    private variable intControllerID;
    private variable arrintCPAC_UltraflatIDs[];
    private variable arrintTeleshakeIDs[];
    private variable arrintCPACIDs[];
    private variable arrintThermoshakeIDs[];
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    _strMethodName = GetMethodFileName();
    intControllerID = 0;
    arrintCPACIDs.SetSize(0);
    arrintCPAC_UltraflatIDs.SetSize(0);
    arrintTeleshakeIDs.SetSize(0);
    arrintThermoshakeIDs.SetSize(0);
    TRACELEVEL::SetTraceLevel(TRACE_LEVEL_RELEASE);
    blnSuccess = HSLInhecoTECLib::Initialize(intControllerID, ASWGLOBAL::BOOL::FALSE, strErrorCode);
    _HandleReturnValue(blnSuccess, "HSLInhecoTECLib::Initialize");
    {
      for(intLoopCounterDevices = 0; intLoopCounterDevices < HSLInhecoTECLib::UPPERDEVICEBOUND;)
      {
        intLoopCounterDevices = intLoopCounterDevices + 1;
        blnSuccess = HSLInhecoTECLib::GetDeviceType(intControllerID, intLoopCounterDevices, intDeviceType, strErrorCode);
        _HandleReturnValue(blnSuccess, "HSLInhecoTECLib::GetDeviceType");
        if (intDeviceType == HSLInhecoTECLib::DEVICE_TYPE::CPAC)
        {
          arrintCPACIDs.AddAsLast(intLoopCounterDevices);
        }
        if (intDeviceType == HSLInhecoTECLib::DEVICE_TYPE::CPAC_Ultraflat)
        {
          arrintCPAC_UltraflatIDs.AddAsLast(intLoopCounterDevices);
        }
        if (intDeviceType == HSLInhecoTECLib::DEVICE_TYPE::Teleshake)
        {
          arrintTeleshakeIDs.AddAsLast(intLoopCounterDevices);
        }
        if (intDeviceType == HSLInhecoTECLib::DEVICE_TYPE::Thermoshake)
        {
          arrintThermoshakeIDs.AddAsLast(intLoopCounterDevices);
        }
      }
    }
    blnSuccess = HSLInhecoTECLib::Terminate(ASWGLOBAL::BOOL::FALSE);
    _HandleReturnValue(blnSuccess, "HSLInhecoTECLib::Terminate");
  } }
