 namespace _Method { #include "ASWStandard\\TraceLevel\\TraceLevel.hsl" }
#include "Hamilton Pump Demo.res"
 namespace _Method { #include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl" }
 namespace _Method { #include "Hamilton Pump\\Hamilton Pump.hsl" }
global device ML_STAR ("Hamilton Pump Demo.lay", "ML_STAR", hslTrue);
variable _intModuleID;
dialog customDialog_1;
dialog customDialog_2;
variable intUserChoice;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    private variable strModuleName;
    private variable intComPort;
    private variable blnSuccess;
    private variable blnSimulationMode;
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    intComPort = 0;
    strModuleName = "PG";
    blnSimulationMode = ASWGLOBAL::BOOL::FALSE;
    blnSuccess = Hamilton_Pump::Initialize(ML_STAR, intComPort, strModuleName, blnSimulationMode, _intModuleID);
    _HandleReturnValue(blnSuccess, "Initialize");
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    intUserChoice = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
    if (intUserChoice == ASWGLOBAL::DIALOG::YES)
    {
      blnSuccess = Hamilton_Pump::Maintenance(ML_STAR, _intModuleID);
      _HandleReturnValue(blnSuccess, "Maintenance");
    }
    blnSuccess = Hamilton_Pump::Start(ML_STAR, _intModuleID, Hamilton_Pump::Valve::Liquid_1, 50, Hamilton_Pump::Direction::CounterClockWise, 20);
    _HandleReturnValue(blnSuccess, "Start");
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    blnSuccess = Hamilton_Pump::Stop(ML_STAR, _intModuleID);
    _HandleReturnValue(blnSuccess, "Stop");
    blnSuccess = Hamilton_Pump::Stop(ML_STAR, _intModuleID);
    _HandleReturnValue(blnSuccess, "Terminate");
  } }
