 namespace _Method { #include "Inheco ODTC\\InhecoODTCController.hs_" }
 namespace _Method { #include "ASWStandard\\TraceLevel\\TraceLevel.hsl" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLTimLib.hsl" }
 namespace _Method { #include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl" }
variable _intDeviceNum;
variable _strLockID;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    private variable strDeviceScript;
    private dialog dialogHandle_1;
    private dialog dialogHandle_2;
    private dialog dialogHandle_3;
    private dialog dialogHandle_4;
    private variable strState;
    private variable strDeviceID;
    private variable strSilaInterfaceVersion;
    private variable intTimeForProtocoll;
    private variable intRequestIDForActiveProtocol;
    private variable blnReturn;
    private variable strSilaSubVersionClass;
    private variable strTime;
    private variable strWsdlFile;
    private variable strDeviceSerialNumber;
    private variable strDate;
    private variable strResult;
    private variable strFirmware;
    private variable strDevManufacturer;
    private variable intReturnValue;
    private variable fltElapsedTime;
    private variable strDateTime;
    private variable strCurrentTime;
    private variable blnLocked;
    private variable strGetParameterResult;
    private variable strPmsID;
    private variable strDeviceName;
    private timer hdlWaitForFinish;
    private variable strArrTemperatureNames[];
    private variable fltArrTemperature[];
    private variable strMessage;
    private variable blnSimulationMode;
    private variable strDeviceAddress;
    private dialog dialogHandle_5;
    INHECOODTCCONTROLLER::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    blnSimulationMode = ASWGLOBAL::BOOL::FALSE;
    strDeviceAddress = "192.168.88.245";
    _strLockID = "ODTC_Demo_Method";
    blnReturn = INHECOODTCCONTROLLER::Initialize("", strDeviceAddress, "", "/odtc.wsdl", "", ASWGLOBAL::BOOL::FALSE, _intDeviceNum, strMessage);
    if (blnReturn == ASWGLOBAL::BOOL::FALSE)
    {
      return;
    }
    blnReturn = INHECOODTCCONTROLLER::GetStatus(_intDeviceNum, strState, strDeviceID, blnLocked, strPmsID, strCurrentTime, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::Initialize", intReturnValue, strMessage);
    blnReturn = INHECOODTCCONTROLLER::ResetDevice(_intDeviceNum, 10, _strLockID, "ID", "IDNAME", blnSimulationMode, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::ResetDevice", intReturnValue, strMessage);
    blnReturn = INHECOODTCCONTROLLER::GetStatus(_intDeviceNum, strState, strDeviceID, blnLocked, strPmsID, strCurrentTime, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::GetStatus", intReturnValue, strMessage);
    strDate = TimGetFormattedDate(Translate("%Y-%m-%dT"));
    strTime = TimGetFormattedTime(Translate("%H:%M:%SZ"));
    strDateTime = strDate + strTime;
    blnReturn = INHECOODTCCONTROLLER::SetDeviceDateTime(_intDeviceNum, _strLockID, strDateTime, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::SetDeviceDateTime", intReturnValue, strMessage);
    blnReturn = INHECOODTCCONTROLLER::SetDeviceNetworkConfig(_intDeviceNum, _strLockID, "DHCP", "255.255.255.0", "192.168.1.1", "", "", intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::SetDeviceNetworkConfig", intReturnValue, strMessage);
    blnReturn = INHECOODTCCONTROLLER::GetStatus(_intDeviceNum, strState, strDeviceID, blnLocked, strPmsID, strCurrentTime, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::GetStatus", intReturnValue, strMessage);
    blnReturn = INHECOODTCCONTROLLER::LockDevice(_intDeviceNum, 20, "ID", _strLockID, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::LockDevice", intReturnValue, strMessage);
    blnReturn = INHECOODTCCONTROLLER::GetStatus(_intDeviceNum, strState, strDeviceID, blnLocked, strPmsID, strCurrentTime, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::GetStatus", intReturnValue, strMessage);
    blnReturn = INHECOODTCCONTROLLER::UnLockDevice(_intDeviceNum, _strLockID, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::UnLockDevice", intReturnValue, strMessage);
    blnReturn = INHECOODTCCONTROLLER::GetStatus(_intDeviceNum, strState, strDeviceID, blnLocked, strPmsID, strCurrentTime, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::GetStatus", intReturnValue, strMessage);
    blnReturn = INHECOODTCCONTROLLER::GetConfiguration(_intDeviceNum, _strLockID, 1, "", strResult, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::GetConfiguration", intReturnValue, strMessage);
    blnReturn = INHECOODTCCONTROLLER::InitializeDevice(_intDeviceNum, _strLockID, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::InitializeDevice", intReturnValue, strMessage);
    blnReturn = INHECOODTCCONTROLLER::GetStatus(_intDeviceNum, strState, strDeviceID, blnLocked, strPmsID, strCurrentTime, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::GetStatus", intReturnValue, strMessage);
    blnReturn = INHECOODTCCONTROLLER::GetParameters(_intDeviceNum, _strLockID, strGetParameterResult, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::GetParameters", intReturnValue, strMessage);
    blnReturn = INHECOODTCCONTROLLER::GetStatus(_intDeviceNum, strState, strDeviceID, blnLocked, strPmsID, strCurrentTime, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::GetStatus", intReturnValue, strMessage);
    blnReturn = INHECOODTCCONTROLLER::SetDeviceCSVSeparator(_intDeviceNum, _strLockID, ";", intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::SetDeviceCSVSeparator", intReturnValue, strMessage);
    blnReturn = INHECOODTCCONTROLLER::GetParameters(_intDeviceNum, _strLockID, strGetParameterResult, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::GetParameters", intReturnValue, strMessage);
    blnReturn = INHECOODTCCONTROLLER::OpenDoor(_intDeviceNum, _strLockID, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::OpenDoor", intReturnValue, strMessage);
    dialogHandle_2.SetOutput(Translate("Door shall be open now please remove plate"));
    dialogHandle_2.ShowOutput(Translate("Inheco ODTC controller"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    blnReturn = INHECOODTCCONTROLLER::CloseDoor(_intDeviceNum, _strLockID, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::CloseDoor", intReturnValue, strMessage);
    dialogHandle_1.SetOutput(Translate("Door shall be Closed now"));
    dialogHandle_1.ShowOutput(Translate("Inheco ODTC controller"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    strDeviceScript = FilGetLibraryPath();
    strDeviceScript = StrConcat2(strDeviceScript, "\\Inheco ODTC\\DeviceScripts\\Neu\Test.xml");
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, "strDeviceScript = ", strDeviceScript);
    if(0){
      strDeviceScript = "";
    }
    blnReturn = INHECOODTCCONTROLLER::ExecuteProtocol(_intDeviceNum, _strLockID, strDeviceScript, "Pre_25", 1, intTimeForProtocoll, intRequestIDForActiveProtocol, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::ExecuteProtocol", intReturnValue, strMessage);
    if( 0 == hdlWaitForFinish.SetTimer(hslInfinite) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    {
      while (ASWGLOBAL::BOOL::TRUE == ASWGLOBAL::BOOL::TRUE)
      {
        fltElapsedTime = hdlWaitForFinish.GetElapsedTime();
        if (fltElapsedTime >= intTimeForProtocoll)
        {
          break;
        }
        blnReturn = INHECOODTCCONTROLLER::ReadActualTemperature(_intDeviceNum, _strLockID, strTime, fltArrTemperature, strArrTemperatureNames, intReturnValue, strMessage);
        if (intReturnValue == 12)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, "ReadActualTemperature failed But Error 2005 or error 2006 warning will be ignored Device will continue operation, intReturnValue = ", intReturnValue, ", strMessage = ", strMessage);
          blnReturn = ASWGLOBAL::BOOL::TRUE;
        }
        _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::ReadActualTemperature", intReturnValue, strMessage);
        _Delay(4);
      }
    }
    blnReturn = INHECOODTCCONTROLLER::WaitForStartedProtocolToFinish(_intDeviceNum, _strLockID, intTimeForProtocoll, 20, intRequestIDForActiveProtocol, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::WaitForStartedProtocolToFinish", intReturnValue, strMessage);
    blnReturn = INHECOODTCCONTROLLER::GetStatus(_intDeviceNum, strState, strDeviceID, blnLocked, strPmsID, strCurrentTime, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::GetStatus", intReturnValue, strMessage);
    blnReturn = INHECOODTCCONTROLLER::OpenDoor(_intDeviceNum, _strLockID, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::OpenDoor", intReturnValue, strMessage);
    dialogHandle_4.SetOutput(Translate("Door shall be open now please insert plate"));
    dialogHandle_4.ShowOutput(Translate("Inheco ODTC controller"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    blnReturn = INHECOODTCCONTROLLER::CloseDoor(_intDeviceNum, _strLockID, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::CloseDoor", intReturnValue, strMessage);
    dialogHandle_3.SetOutput(Translate("Door shall be Closed now"));
    dialogHandle_3.ShowOutput(Translate("Inheco ODTC controller"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    strDeviceScript = FilGetLibraryPath();
    strDeviceScript = StrConcat2(strDeviceScript, "\\Inheco ODTC\\DeviceScripts\\Neu\PCR_A optimal cooling temp.xml");
    TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, "strDeviceScript = ", strDeviceScript);
    blnReturn = INHECOODTCCONTROLLER::ExecuteProtocol(_intDeviceNum, _strLockID, strDeviceScript, "PCR_A optimal cooling Temp", 1, intTimeForProtocoll, intRequestIDForActiveProtocol, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::ExecuteProtocol", intReturnValue, strMessage);
    if( 0 == hdlWaitForFinish.SetTimer(hslInfinite) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    {
      while (ASWGLOBAL::BOOL::TRUE == ASWGLOBAL::BOOL::TRUE)
      {
        fltElapsedTime = hdlWaitForFinish.GetElapsedTime();
        if (fltElapsedTime >= intTimeForProtocoll)
        {
          break;
        }
        blnReturn = INHECOODTCCONTROLLER::ReadActualTemperature(_intDeviceNum, _strLockID, strTime, fltArrTemperature, strArrTemperatureNames, intReturnValue, strMessage);
        if (intReturnValue == 12)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, "ReadActualTemperature failed But Error 2005 or error 2006 warning will be ignored Device will continue operation, intReturnValue = ", intReturnValue, ", strMessage = ", strMessage);
          blnReturn = ASWGLOBAL::BOOL::TRUE;
        }
        _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::ReadActualTemperature", intReturnValue, strMessage);
        _Delay(5);
      }
    }
    blnReturn = INHECOODTCCONTROLLER::GetStatus(_intDeviceNum, strState, strDeviceID, blnLocked, strPmsID, strCurrentTime, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::GetStatus", intReturnValue, strMessage);
    blnReturn = INHECOODTCCONTROLLER::WaitForStartedProtocolToFinish(_intDeviceNum, _strLockID, intTimeForProtocoll, 20, intRequestIDForActiveProtocol, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::WaitForStartedProtocolToFinish", intReturnValue, strMessage);
    blnReturn = INHECOODTCCONTROLLER::GetStatus(_intDeviceNum, strState, strDeviceID, blnLocked, strPmsID, strCurrentTime, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::GetStatus", intReturnValue, strMessage);
    blnReturn = INHECOODTCCONTROLLER::GetDeviceIdentification(_intDeviceNum, _strLockID, strFirmware, strDevManufacturer, strDeviceName, strDeviceSerialNumber, strSilaInterfaceVersion, strSilaSubVersionClass, strWsdlFile, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::GetDeviceIdentification", intReturnValue, strMessage);
    blnReturn = INHECOODTCCONTROLLER::OpenDoor(_intDeviceNum, _strLockID, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::OpenDoor", intReturnValue, strMessage);
    dialogHandle_5.SetOutput(Translate("Door shall be open now please remove plate"));
    dialogHandle_5.ShowOutput(Translate("Inheco ODTC controller"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    blnReturn = INHECOODTCCONTROLLER::CloseDoor(_intDeviceNum, _strLockID, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::CloseDoor", intReturnValue, strMessage);
    blnReturn = INHECOODTCCONTROLLER::StopMethod(_intDeviceNum, _strLockID, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::StopMethod", intReturnValue, strMessage);
    blnReturn = INHECOODTCCONTROLLER::ResetDevice(_intDeviceNum, 40, _strLockID, "ID", "IDNAME", blnSimulationMode, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::ResetDevice", intReturnValue, strMessage);
    blnReturn = INHECOODTCCONTROLLER::TerminateSingleDevice(_intDeviceNum, strMessage);
    if (blnReturn == ASWGLOBAL::BOOL::FALSE)
    {
      abort;
    }
    blnReturn = INHECOODTCCONTROLLER::TerminateAllDevicesAndCloseComunication(strMessage);
    if (blnReturn == ASWGLOBAL::BOOL::FALSE)
    {
      abort;
    }
    INHECOODTCCONTROLLER::_ExitLibrary();
  } }
