private function Device_Connect( variable & o_strSN ) variable ;
private function Device_Disconnect(  ) variable ;
private function Device_EvaporatorTest(  ) void ;
private function Device_Initialize( variable i_blnForceInit ) variable ;
private function Device_ManifoldTest(  ) void ;
private function Device_ReagentCVTest(  ) void ;
private function Device_ReagentTest( variable i_blnDrainLine ) void ;
private function Device_VacuumTest(  ) void ;
private function Dialog_ErrorMessage( variable i_strProcessDescription ) void ;
private function Dialog_ErrorMessageGeneric( variable i_strProcessDescription ) void ;
private function Dialog_Splash(  ) void ;
private function Results_GetResults( variable & o_blnVacuum, variable & o_blnManifold, variable & o_blnEvaporator, variable & o_blnReagent ) void ;
private function Settings_DeleteConfig(  ) void ;
private function Settings_GetAccessories( variable & o_blnOptionReagent, variable & o_blnOptionEvaporator, variable & o_blnVacuum ) void ;
private function Settings_SetAccessories(  ) void ;
private function Settings_SetConfig(  ) void ;
private function _GetListOfMPE( variable & o_arrMPEs[] ) variable ;
private function _GetSummaryString( variable & o_strSummary ) void ;
private function _MonitorEvaporatorModule(  ) void ;
private function _MonitorPressure(  ) void ;
private function _UpdateResults( variable i_strKeyTest, variable i_strKeyDate, variable i_blnResult ) void ;
private function _UpdateResultsCV( variable i_blnResult, variable i_fltCV, variable i_fltAVG ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  Device_Disconnect();
}

private function Settings_SetConfig(  ) void {
  private variable l_strFunctionName;
  private variable l_blnFileExists;
  private variable l_blnConnectCOM;
  private variable l_blnConnectIP;
  private variable l_intCOMPort;
  private variable l_intBaudRate;
  private variable l_strIPAddress;
  private variable l_intIPPort;
  private variable l_intMPEOptions;
  private dialog customDialog_1;
  private dialog customDialog_2;
  private dialog customDialog_3;
  private variable l_blnEnableEvaporator;
  private variable l_blnEnableReagent;
  private variable l_strDataDefinition;
  private dialog customDialog_4;
  private variable l_strSN;
  private variable l_blnValueCheck;
  private dialog customDialog_5;
  private variable l_intWasteContainer;
  private variable l_blnWasteContainer1;
  private variable l_blnWasteContainer2;
  private variable l_blnWasteContainer0;
  private variable l_intNumberOfNeedles;
  l_strFunctionName = Translate("");
  {
       variable _intLength(0);
       string _strTmp;
       _strTmp = GetFunctionName();
       _intLength = _strTmp.GetLength();
       l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
  l_blnFileExists = HSLExtensions::File::Exists(t_strConfigFilePath);
  l_blnConnectCOM = ASWGLOBAL::BOOL::TRUE;
  l_blnConnectIP = ASWGLOBAL::BOOL::FALSE;
  l_intCOMPort = 1;
  l_strIPAddress = Translate("192.168.100.100");
  l_intBaudRate = 921600;
  l_intIPPort = 2000;
  l_intMPEOptions = 0;
  l_strSN = Translate("");
  l_intWasteContainer = -1;
  l_blnWasteContainer1 = ASWGLOBAL::BOOL::TRUE;
  l_blnWasteContainer2 = ASWGLOBAL::BOOL::FALSE;
  l_blnWasteContainer0 = ASWGLOBAL::BOOL::FALSE;
  l_intNumberOfNeedles = 0;
  l_strDataDefinition = StrConcat4(t_strDataDefinition, t_strMPESelected, Translate(""), Translate(""));
  if (l_blnFileExists == ASWGLOBAL::BOOL::TRUE)
  {
    l_blnFileExists = CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyConnectCom, 3, l_blnValueCheck);
  }
  if (l_blnFileExists == ASWGLOBAL::BOOL::TRUE)
  {
    CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyConnectCom, 3, l_blnConnectCOM);
    CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyConnectIP, 3, l_blnConnectIP);
    CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyCOM, 1, l_intCOMPort);
    CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyBaud, 1, l_intBaudRate);
    CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyIP, 0, l_strIPAddress);
    CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyPort, 1, l_intIPPort);
    CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyMPEOptions, 1, l_intMPEOptions);
    CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeySN, 0, l_strSN);
    CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyWasteContainer, 1, l_intWasteContainer);
    CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyNumNeedles, 1, l_intNumberOfNeedles);
  }
  l_blnEnableEvaporator = ASWGLOBAL::BOOL::FALSE;
  l_blnEnableReagent = ASWGLOBAL::BOOL::FALSE;
  customDialog_1.InitCustomDialog("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");
  customDialog_1.SetCustomDialogProperty( "Title", t_strMethodName );
  customDialog_1.SetCustomDialogProperty( "radioButton1.IsChecked", l_blnConnectCOM );
  customDialog_1.SetCustomDialogProperty( "radioButton2.IsChecked", l_blnConnectIP );
  customDialog_1.ShowCustomDialog();
  l_blnConnectCOM = customDialog_1.GetCustomDialogProperty( "radioButton1.IsChecked" );
  l_blnConnectIP = customDialog_1.GetCustomDialogProperty( "radioButton2.IsChecked" );
  if (l_blnConnectCOM == ASWGLOBAL::BOOL::TRUE)
  {
    customDialog_2.InitCustomDialog("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");
    customDialog_2.SetCustomDialogProperty( "Title", t_strMethodName );
    customDialog_2.SetCustomDialogProperty( "numeric1.Value", l_intCOMPort );
    customDialog_2.ShowCustomDialog();
    l_intCOMPort = customDialog_2.GetCustomDialogProperty( "numeric1.Value" );
  }
  if (l_blnConnectIP == ASWGLOBAL::BOOL::TRUE)
  {
    customDialog_3.InitCustomDialog("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");
    customDialog_3.SetCustomDialogProperty( "Title", t_strMethodName );
    customDialog_3.SetCustomDialogProperty( "textInput1.Text", l_strIPAddress );
    customDialog_3.ShowCustomDialog();
    l_strIPAddress = customDialog_3.GetCustomDialogProperty( "textInput1.Text" );
  }
  {
       l_blnWasteContainer0 = hslFalse;
       l_blnWasteContainer1 = hslFalse;
       l_blnWasteContainer2 = hslFalse;
       if(l_intWasteContainer == -1) l_blnWasteContainer0 = hslTrue;
       if(l_intWasteContainer == 0) l_blnWasteContainer1 = hslTrue;
       if(l_intWasteContainer == 1) l_blnWasteContainer2 = hslTrue;
  }
  customDialog_5.InitCustomDialog("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");
  customDialog_5.SetCustomDialogProperty( "Title", t_strMethodName );
  customDialog_5.SetCustomDialogProperty( "radioButton1.IsChecked", l_blnWasteContainer1 );
  customDialog_5.SetCustomDialogProperty( "radioButton2.IsChecked", l_blnWasteContainer2 );
  customDialog_5.SetCustomDialogProperty( "radioButton3.IsChecked", l_blnWasteContainer0 );
  customDialog_5.ShowCustomDialog();
  l_blnWasteContainer1 = customDialog_5.GetCustomDialogProperty( "radioButton1.IsChecked" );
  l_blnWasteContainer2 = customDialog_5.GetCustomDialogProperty( "radioButton2.IsChecked" );
  l_blnWasteContainer0 = customDialog_5.GetCustomDialogProperty( "radioButton3.IsChecked" );
  {
       if(l_blnWasteContainer0 == hslTrue) l_intWasteContainer = -1;
       if(l_blnWasteContainer1 == hslTrue) l_intWasteContainer = 0;
       if(l_blnWasteContainer2 == hslTrue) l_intWasteContainer = 1;
  }
  customDialog_4.InitCustomDialog("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");
  customDialog_4.SetCustomDialogProperty( "Title", t_strMethodName );
  customDialog_4.SetCustomDialogProperty( "textInput1.Text", l_strSN );
  customDialog_4.ShowCustomDialog();
  l_strSN = customDialog_4.GetCustomDialogProperty( "textInput1.Text" );
  CONFIGHELPER::CREATE_AddNewValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyConnectCom, 3, l_blnConnectCOM);
  CONFIGHELPER::CREATE_AddNewValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyConnectIP, 3, l_blnConnectIP);
  CONFIGHELPER::CREATE_AddNewValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyCOM, 1, l_intCOMPort);
  CONFIGHELPER::CREATE_AddNewValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyBaud, 1, l_intBaudRate);
  CONFIGHELPER::CREATE_AddNewValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyIP, 0, l_strIPAddress);
  CONFIGHELPER::CREATE_AddNewValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyPort, 1, l_intIPPort);
  CONFIGHELPER::CREATE_AddNewValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyMPEOptions, 1, l_intMPEOptions);
  CONFIGHELPER::CREATE_AddNewValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeySN, 0, l_strSN);
  CONFIGHELPER::CREATE_AddNewValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyWasteContainer, 1, l_intWasteContainer);
  CONFIGHELPER::CREATE_AddNewValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyNumNeedles, 1, l_intNumberOfNeedles);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
}

private function Settings_SetAccessories(  ) void {
  private variable l_strFunctionName;
  private variable l_intMPEOptions;
  private variable l_blnFileExists;
  private dialog customDialog_6;
  private variable l_blnEnableReagent;
  private variable l_blnEnableEvaporator;
  private variable l_strDataDefinition;
  private variable l_intRetry;
  private dialog customDialog_7;
  private variable l_intNumNeedles;
  private variable l_blnEnable4Needles;
  private variable l_blnEnable8Needles;
  private variable l_blnSuccess;
  l_strFunctionName = Translate("");
  {
       variable _intLength(0);
       string _strTmp;
       _strTmp = GetFunctionName();
       _intLength = _strTmp.GetLength();
       l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
  l_intMPEOptions = 0;
  l_blnFileExists = HSLExtensions::File::Exists(t_strConfigFilePath);
  l_strDataDefinition = StrConcat4(t_strDataDefinition, t_strMPESelected, Translate(""), Translate(""));
  l_intNumNeedles = 0;
  if (l_blnFileExists == ASWGLOBAL::BOOL::TRUE)
  {
    {
      for(l_intRetry = 0; l_intRetry < 2;)
      {
        l_intRetry = l_intRetry + 1;
        l_blnFileExists = CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyMPEOptions, 1, l_intMPEOptions);
        CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyNumNeedles, 1, l_intNumNeedles);
        l_intNumNeedles = HSLExtensions::Core::ConvertToInteger(l_intNumNeedles, l_blnSuccess);
        if (l_blnFileExists == ASWGLOBAL::BOOL::FALSE)
        {
          Settings_SetConfig();
        }
        else
        {
          break;
        }
      }
    }
  }
  {
       if(l_intMPEOptions==0)
       {
            l_blnEnableEvaporator = hslFalse;
            l_blnEnableReagent = hslFalse;
       }
       if(l_intMPEOptions==1)
       {
            l_blnEnableEvaporator = hslFalse;
            l_blnEnableReagent = hslTrue;
       }
       if(l_intMPEOptions==2)
       {
            l_blnEnableEvaporator = hslTrue;
            l_blnEnableReagent = hslFalse;
       }
       if(l_intMPEOptions==3)
       {
            l_blnEnableEvaporator = hslTrue;
            l_blnEnableReagent = hslTrue;
       }
  }
  customDialog_6.InitCustomDialog("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");
  customDialog_6.SetCustomDialogProperty( "Title", t_strMethodName );
  customDialog_6.SetCustomDialogProperty( "CheckMarkReagent.IsVisible", l_blnEnableReagent );
  customDialog_6.SetCustomDialogProperty( "RemoveReagent.IsVisible", l_blnEnableReagent );
  customDialog_6.SetCustomDialogProperty( "CheckMarkEvaporator.IsVisible", l_blnEnableEvaporator );
  customDialog_6.SetCustomDialogProperty( "RemoveEvaporator.IsVisible", l_blnEnableEvaporator );
  customDialog_6.ShowCustomDialog();
  l_blnEnableReagent = customDialog_6.GetCustomDialogProperty( "CheckMarkReagent.IsVisible" );
  l_blnEnableEvaporator = customDialog_6.GetCustomDialogProperty( "CheckMarkEvaporator.IsVisible" );
  if(l_blnEnableEvaporator==hslFalse && l_blnEnableReagent==hslFalse) l_intMPEOptions = 0;
  if(l_blnEnableEvaporator==hslFalse && l_blnEnableReagent==hslTrue) l_intMPEOptions = 1;
  if(l_blnEnableEvaporator==hslTrue && l_blnEnableReagent==hslFalse) l_intMPEOptions = 2;
  if(l_blnEnableEvaporator==hslTrue && l_blnEnableReagent==hslTrue) l_intMPEOptions = 3;
  if (l_blnEnableReagent == ASWGLOBAL::BOOL::TRUE)
  {
    if (l_intNumNeedles == 4)
    {
      l_blnEnable4Needles = ASWGLOBAL::BOOL::TRUE;
      l_blnEnable8Needles = ASWGLOBAL::BOOL::FALSE;
    }
    else
    {
      l_blnEnable8Needles = ASWGLOBAL::BOOL::TRUE;
      l_blnEnable4Needles = ASWGLOBAL::BOOL::FALSE;
    }
    customDialog_7.InitCustomDialog("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");
    customDialog_7.SetCustomDialogProperty( "Title", t_strMethodName );
    customDialog_7.SetCustomDialogProperty( "radioButton1.IsChecked", l_blnEnable8Needles );
    customDialog_7.SetCustomDialogProperty( "radioButton2.IsChecked", l_blnEnable4Needles );
    customDialog_7.ShowCustomDialog();
    l_blnEnable8Needles = customDialog_7.GetCustomDialogProperty( "radioButton1.IsChecked" );
    l_blnEnable4Needles = customDialog_7.GetCustomDialogProperty( "radioButton2.IsChecked" );
    if (l_blnEnable4Needles == ASWGLOBAL::BOOL::TRUE)
    {
      l_intNumNeedles = 4;
    }
    if (l_blnEnable8Needles == ASWGLOBAL::BOOL::TRUE)
    {
      l_intNumNeedles = 8;
    }
  }
  CONFIGHELPER::CREATE_AddNewValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyMPEOptions, 1, l_intMPEOptions);
  CONFIGHELPER::CREATE_AddNewValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyNumNeedles, 1, l_intNumNeedles);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
}

private function Dialog_Splash(  ) void {
  private variable l_strFunctionName;
  private dialog customDialog_8;
  private variable l_intDialogReturn;
  private variable l_blnEnableManifold;
  private variable l_blnEnableVacuum;
  private variable l_blnEnableReagent;
  private variable l_blnEnableEvaporator;
  private variable l_strConnectButtonText;
  private variable l_blnEnableConfigurationChange;
  private variable l_strInstrumentConnected;
  private variable l_strInstrumentInitialized;
  private variable l_strReagentSet;
  private variable l_strEvaporatorSet;
  private variable l_blnOptionEvaporator;
  private variable l_blnOptionReagent;
  private variable l_blnVacuum;
  private variable l_strSummaryString;
  private variable l_blnResultReagent;
  private variable l_blnResultVacuum;
  private variable l_blnResultEvaporator;
  private variable l_blnResultMainifold;
  private variable l_strResultImageManifold;
  private variable l_strResultImageVacuum;
  private variable l_strResultImageReagent;
  private variable l_strResultImageEvaporator;
  private variable l_strDataDefinition;
  private dialog customDialog_9;
  private variable l_blnEditConfig;
  private variable l_blnDeleteConfig;
  private dialog customDialog_10;
  private dialog customDialog_11;
  private variable l_intDeleteDialogResult;
  private variable l_intTotalMPESet;
  private variable l_blnEnableEditDelete;
  private dialog customDialog_12;
  private dialog customDialog_13;
  private variable l_strDeleteProfileName;
  private dialog customDialog_14;
  private variable l_blnReagentCV;
  private variable l_blnReagentPlate;
  l_strFunctionName = Translate("");
  {
       variable _intLength(0);
       string _strTmp;
       _strTmp = GetFunctionName();
       _intLength = _strTmp.GetLength();
       l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
  l_intDialogReturn = 0;
  l_strInstrumentConnected = t_strImageWarning;
  l_strInstrumentInitialized = t_strImageWarning;
  {
    while (l_intDialogReturn != 10)
    {
      l_blnEnableManifold = ASWGLOBAL::BOOL::FALSE;
      l_blnEnableVacuum = ASWGLOBAL::BOOL::FALSE;
      l_blnEnableReagent = ASWGLOBAL::BOOL::FALSE;
      l_blnEnableEvaporator = ASWGLOBAL::BOOL::FALSE;
      l_strReagentSet = t_strImageOff;
      l_strEvaporatorSet = t_strImageOff;
      Settings_GetAccessories(l_blnOptionReagent, l_blnOptionEvaporator, l_blnVacuum);
      Results_GetResults(l_blnResultVacuum, l_blnResultMainifold, l_blnResultEvaporator, l_blnResultReagent);
      if (l_blnOptionReagent == ASWGLOBAL::BOOL::TRUE)
      {
        l_strReagentSet = t_strImageOn;
      }
      if (l_blnOptionEvaporator == ASWGLOBAL::BOOL::TRUE)
      {
        l_strEvaporatorSet = t_strImageOn;
      }
      if (t_intDeviceID != 0)
      {
        HSLMPELib::IsConnected(t_intDeviceID, t_blnInstrumentConnected);
      }
      if (t_blnInstrumentConnected == ASWGLOBAL::BOOL::FALSE)
      {
        l_strConnectButtonText = Translate("Connect");
        l_blnEnableConfigurationChange = ASWGLOBAL::BOOL::TRUE;
        l_strInstrumentConnected = t_strImageWarning;
      }
      else
      {
        HSLMPELib::IsInitialized(t_intDeviceID, t_blnInstrumentInitialized);
        l_strConnectButtonText = Translate("Disconnect");
        l_blnEnableConfigurationChange = ASWGLOBAL::BOOL::FALSE;
        l_strInstrumentConnected = t_strImageSuccess;
      }
      if (t_blnInstrumentInitialized == ASWGLOBAL::BOOL::TRUE)
      {
        l_strInstrumentInitialized = t_strImageSuccess;
        l_blnEnableManifold = ASWGLOBAL::BOOL::TRUE;
        if (l_blnResultMainifold == ASWGLOBAL::BOOL::TRUE)
        {
          l_strResultImageManifold = t_strImageSuccess;
        }
        else
        {
          l_strResultImageManifold = t_strImageError;
        }
        if (l_blnVacuum == ASWGLOBAL::BOOL::TRUE)
        {
          l_blnEnableVacuum = ASWGLOBAL::BOOL::TRUE;
          if (l_blnResultVacuum == ASWGLOBAL::BOOL::TRUE)
          {
            l_strResultImageVacuum = t_strImageSuccess;
          }
          else
          {
            l_strResultImageVacuum = t_strImageError;
          }
        }
        if (l_blnOptionReagent == ASWGLOBAL::BOOL::TRUE)
        {
          l_blnEnableReagent = ASWGLOBAL::BOOL::TRUE;
          if (l_blnResultReagent == ASWGLOBAL::BOOL::TRUE)
          {
            l_strResultImageReagent = t_strImageSuccess;
          }
          else
          {
            l_strResultImageReagent = t_strImageError;
          }
        }
        if (l_blnOptionEvaporator == ASWGLOBAL::BOOL::TRUE)
        {
          l_blnEnableEvaporator = ASWGLOBAL::BOOL::TRUE;
          if (l_blnResultEvaporator == ASWGLOBAL::BOOL::TRUE)
          {
            l_strResultImageEvaporator = t_strImageSuccess;
          }
          else
          {
            l_strResultImageEvaporator = t_strImageError;
          }
        }
      }
      else
      {
        l_strInstrumentInitialized = t_strImageWarning;
      }
      _GetSummaryString(l_strSummaryString);
      l_strDataDefinition = StrConcat4(t_strDataDefinition, t_strMPESelected, Translate(""), Translate(""));
      CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeySN, 0, t_strSerialNumber);
      customDialog_8.InitCustomDialog("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");
      customDialog_8.SetCustomDialogProperty( "Title", t_strMethodName );
      customDialog_8.SetCustomDialogProperty( "image2.Source", l_strInstrumentConnected );
      customDialog_8.SetCustomDialogProperty( "image3.Source", l_strInstrumentInitialized );
      customDialog_8.SetCustomDialogProperty( "button1.IsEnabled", t_blnInstrumentConnected );
      customDialog_8.SetCustomDialogProperty( "textBlock4.Text", t_strSerialNumber );
      customDialog_8.SetCustomDialogProperty( "textBlock5.IsVisible", t_blnSimulaitonMode );
      customDialog_8.SetCustomDialogProperty( "image5.Source", l_strReagentSet );
      customDialog_8.SetCustomDialogProperty( "image6.Source", l_strEvaporatorSet );
      customDialog_8.SetCustomDialogProperty( "button3.IsEnabled", l_blnEnableConfigurationChange );
      customDialog_8.SetCustomDialogProperty( "button5.IsEnabled", l_blnEnableManifold );
      customDialog_8.SetCustomDialogProperty( "button6.IsEnabled", l_blnEnableReagent );
      customDialog_8.SetCustomDialogProperty( "button7.IsEnabled", l_blnEnableEvaporator );
      customDialog_8.SetCustomDialogProperty( "button8.Content", l_strConnectButtonText );
      customDialog_8.SetCustomDialogProperty( "button2.IsEnabled", l_blnEnableVacuum );
      customDialog_8.SetCustomDialogProperty( "textBlock6.Text", l_strSummaryString );
      customDialog_8.SetCustomDialogProperty( "image1.IsVisible", l_blnEnableManifold );
      customDialog_8.SetCustomDialogProperty( "image1.Source", l_strResultImageManifold );
      customDialog_8.SetCustomDialogProperty( "image4.IsVisible", l_blnEnableReagent );
      customDialog_8.SetCustomDialogProperty( "image4.Source", l_strResultImageReagent );
      customDialog_8.SetCustomDialogProperty( "image7.IsVisible", l_blnEnableEvaporator );
      customDialog_8.SetCustomDialogProperty( "image7.Source", l_strResultImageEvaporator );
      customDialog_8.SetCustomDialogProperty( "image8.IsVisible", l_blnEnableVacuum );
      customDialog_8.SetCustomDialogProperty( "image8.Source", l_strResultImageVacuum );
      customDialog_8.ShowCustomDialog();
      l_intDialogReturn = customDialog_8.GetCustomDialogProperty( "ReturnValue" );
      if (l_intDialogReturn == 3)
      {
        {
          while (ASWGLOBAL::BOOL::TRUE == ASWGLOBAL::BOOL::TRUE)
          {
            l_intTotalMPESet = _GetListOfMPE(t_arrSetMPE);
            l_blnDeleteConfig = ASWGLOBAL::BOOL::FALSE;
            if (l_intTotalMPESet > 0)
            {
              customDialog_12.InitCustomDialog("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");
              customDialog_12.SetCustomDialogArrayProperty( "dropDown1.ItemsSource", t_arrSetMPE );
              customDialog_12.SetCustomDialogProperty( "Title", t_strMethodName );
              customDialog_12.SetCustomDialogProperty( "dropDown1.SelectedIndex", t_intSelectedIndex );
              customDialog_12.ShowCustomDialog();
              t_intSelectedIndex = customDialog_12.GetCustomDialogProperty( "dropDown1.SelectedIndex" );
              l_blnEditConfig = customDialog_12.GetCustomDialogProperty( "checkbox1.IsChecked" );
              l_blnDeleteConfig = customDialog_12.GetCustomDialogProperty( "checkbox2.IsChecked" );
            }
            else
            {
              customDialog_13.InitCustomDialog("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");
              customDialog_13.SetCustomDialogArrayProperty( "dropDown1.ItemsSource", t_arrSetMPE );
              customDialog_13.SetCustomDialogProperty( "Title", t_strMethodName );
              customDialog_13.SetCustomDialogProperty( "dropDown1.SelectedIndex", t_intSelectedIndex );
              customDialog_13.ShowCustomDialog();
              t_intSelectedIndex = customDialog_13.GetCustomDialogProperty( "dropDown1.SelectedIndex" );
            }
            t_strMPESelected=t_arrMPESelection.GetAt(t_intSelectedIndex-1);
            l_strDeleteProfileName=t_arrSetMPE.GetAt(t_intSelectedIndex-1);
            if (l_strDeleteProfileName == "Not Set")
            {
              l_blnDeleteConfig = ASWGLOBAL::BOOL::FALSE;
            }
            if (l_blnDeleteConfig == ASWGLOBAL::BOOL::FALSE)
            {
              break;
            }
            customDialog_11.InitCustomDialog("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");
            customDialog_11.SetCustomDialogProperty( "Title", t_strMethodName );
            customDialog_11.SetCustomDialogProperty( "textBlock2.Text", l_strDeleteProfileName );
            customDialog_11.ShowCustomDialog();
            l_intDeleteDialogResult = customDialog_11.GetCustomDialogProperty( "ReturnValue" );
            if (l_intDeleteDialogResult == ASWGLOBAL::DIALOG::CANCEL)
            {
              Settings_DeleteConfig();
            }
          }
        }
        if (l_blnEditConfig == ASWGLOBAL::BOOL::TRUE)
        {
          Settings_SetConfig();
          Settings_SetAccessories();
        }
      }
      if (l_intDialogReturn == 1)
      {
        if (t_blnInstrumentConnected == ASWGLOBAL::BOOL::FALSE)
        {
          t_blnInstrumentConnected = Device_Connect(t_strSerialNumber);
          if (t_blnInstrumentConnected == ASWGLOBAL::BOOL::FALSE)
          {
            l_strInstrumentConnected = t_strImageError;
          }
        }
        else
        {
          Device_Disconnect();
          l_strInstrumentConnected = t_strImageWarning;
        }
      }
      if (l_intDialogReturn == 2)
      {
        t_blnInstrumentInitialized = Device_Initialize(ASWGLOBAL::BOOL::TRUE);
        l_strInstrumentInitialized = t_strImageSuccess;
        if (t_blnInstrumentInitialized == ASWGLOBAL::BOOL::FALSE)
        {
          l_strInstrumentInitialized = t_strImageError;
        }
      }
      if (l_intDialogReturn == 4)
      {
        Device_ManifoldTest();
      }
      if (l_intDialogReturn == 5)
      {
        customDialog_14.InitCustomDialog("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");
        customDialog_14.SetCustomDialogProperty( "Title", t_strMethodName );
        customDialog_14.ShowCustomDialog();
        l_blnReagentPlate = customDialog_14.GetCustomDialogProperty( "checkbox1.IsChecked" );
        l_blnReagentCV = customDialog_14.GetCustomDialogProperty( "checkbox2.IsChecked" );
        if (l_blnReagentPlate == ASWGLOBAL::BOOL::TRUE)
        {
          if (l_blnReagentCV == ASWGLOBAL::BOOL::TRUE)
          {
            Device_ReagentTest(ASWGLOBAL::BOOL::FALSE);
          }
          else
          {
            Device_ReagentTest(ASWGLOBAL::BOOL::TRUE);
          }
        }
        if (l_blnReagentCV == ASWGLOBAL::BOOL::TRUE)
        {
          Device_ReagentCVTest();
        }
      }
      if (l_intDialogReturn == 6)
      {
        Device_EvaporatorTest();
      }
      if (l_intDialogReturn == 7)
      {
        Device_VacuumTest();
      }
    }
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
}

private function Settings_GetAccessories( variable & o_blnOptionReagent, variable & o_blnOptionEvaporator, variable & o_blnVacuum ) void {
  private variable l_strFunctionName;
  private variable l_intMPEOptions;
  private variable l_strDataDefinition;
  private variable l_blnEnableEvaporator;
  private variable l_blnEnableReagent;
  private variable l_blnFileExists;
  private variable l_intRetry;
  private variable l_intWasteContainer;
  o_blnOptionReagent = 0;
  o_blnOptionEvaporator = 0;
  o_blnVacuum = 0;
  l_strFunctionName = Translate("");
  {
       variable _intLength(0);
       string _strTmp;
       _strTmp = GetFunctionName();
       _intLength = _strTmp.GetLength();
       l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
  l_strDataDefinition = StrConcat4(t_strDataDefinition, t_strMPESelected, Translate(""), Translate(""));
  {
    for(l_intRetry = 0; l_intRetry < 2;)
    {
      l_intRetry = l_intRetry + 1;
      l_blnFileExists = CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyMPEOptions, 1, l_intMPEOptions);
      if (l_blnFileExists == ASWGLOBAL::BOOL::FALSE)
      {
        Settings_SetConfig();
        Settings_SetAccessories();
      }
      else
      {
        break;
      }
    }
  }
  CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyWasteContainer, 1, l_intWasteContainer);
  {
       if(l_intWasteContainer == -1) o_blnVacuum = hslFalse;
       if(l_intWasteContainer == 0) o_blnVacuum = hslTrue;
       if(l_intWasteContainer == 1) o_blnVacuum = hslTrue;
  }
  l_blnEnableEvaporator = ASWGLOBAL::BOOL::FALSE;
  l_blnEnableReagent = ASWGLOBAL::BOOL::FALSE;
  {
       if(l_intMPEOptions==0)
       {
            l_blnEnableEvaporator = hslFalse;
            l_blnEnableReagent = hslFalse;
       }
       if(l_intMPEOptions==1)
       {
            l_blnEnableEvaporator = hslFalse;
            l_blnEnableReagent = hslTrue;
       }
       if(l_intMPEOptions==2)
       {
            l_blnEnableEvaporator = hslTrue;
            l_blnEnableReagent = hslFalse;
       }
       if(l_intMPEOptions==3)
       {
            l_blnEnableEvaporator = hslTrue;
            l_blnEnableReagent = hslTrue;
       }
  }
  o_blnOptionEvaporator = l_blnEnableEvaporator;
  o_blnOptionReagent = l_blnEnableReagent;
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
}

private function Device_Connect( variable & o_strSN ) variable {
  private variable l_strFunctionName;
  private variable l_blnConnectIP;
  private variable l_intBaudRate;
  private variable l_intMPEOptions;
  private variable l_strDataDefinition;
  private variable l_intCOMPort;
  private variable l_strIPAddress;
  private variable l_blnConnectCOM;
  private variable l_intIPPort;
  private variable l_intReturnValue;
  private variable l_blnReturnValue;
  private variable l_blnValueCheck;
  private variable l_blnFileExists;
  o_strSN = 0;
  if (t_blnInstrumentConnected == ASWGLOBAL::BOOL::TRUE)
  {
    return (ASWGLOBAL::BOOL::TRUE);
  }
  l_strFunctionName = Translate("");
  {
       variable _intLength(0);
       string _strTmp;
       _strTmp = GetFunctionName();
       _intLength = _strTmp.GetLength();
       l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
  l_strDataDefinition = StrConcat4(t_strDataDefinition, t_strMPESelected, Translate(""), Translate(""));
  l_blnFileExists = CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyConnectCom, 3, l_blnValueCheck);
  if (l_blnFileExists == ASWGLOBAL::BOOL::FALSE)
  {
    Settings_SetConfig();
    Settings_SetAccessories();
  }
  CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyConnectCom, 3, l_blnConnectCOM);
  CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyConnectIP, 3, l_blnConnectIP);
  CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyCOM, 1, l_intCOMPort);
  CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyBaud, 1, l_intBaudRate);
  CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyIP, 0, l_strIPAddress);
  CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyPort, 1, l_intIPPort);
  CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyMPEOptions, 1, l_intMPEOptions);
  CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeySN, 0, o_strSN);
  if (l_blnConnectCOM == ASWGLOBAL::BOOL::TRUE)
  {
    l_intReturnValue = HSLMPELib::ConnectUsingCOM(l_intCOMPort, l_intBaudRate, t_blnSimulaitonMode, t_intDeviceID, l_intMPEOptions);
  }
  if (l_blnConnectIP == ASWGLOBAL::BOOL::TRUE)
  {
    l_intReturnValue = HSLMPELib::ConnectUsingIP(l_strIPAddress, l_intIPPort, t_blnSimulaitonMode, t_intDeviceID, l_intMPEOptions);
  }
  l_blnReturnValue = ASWGLOBAL::BOOL::FALSE;
  if (l_intReturnValue == 0)
  {
    l_blnReturnValue = ASWGLOBAL::BOOL::TRUE;
  }
  else
  {
    Dialog_ErrorMessage(Translate("Error connecting to [MPE]²"));
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  return (l_blnReturnValue);
}

private function Dialog_ErrorMessage( variable i_strProcessDescription ) void {
  private variable l_strMessage;
  private dialog customDialog_15;
  private variable l_strErrorName;
  private variable l_strErrorDescription;
  private variable l_blnValueFound;
  private variable l_intTotalErrors;
  private variable l_arrErrorsFound[];
  private variable l_intErrorNumber;
  private variable l_strFullError;
  HSLMPELib::GetLastError(t_intDeviceID, 0, l_strMessage);
  l_blnValueFound = ASWGLOBAL::BOOL::FALSE;
  l_intTotalErrors = MPE2ERRORCODEPARSER::GetMultipleErrors(l_strMessage, l_arrErrorsFound);
  l_strErrorDescription = Translate("");
  if (l_intTotalErrors > 0)
  {
    l_strFullError = Translate("");
    {
      for(l_intErrorNumber = 0; l_intErrorNumber < l_intTotalErrors;)
      {
        l_intErrorNumber = l_intErrorNumber + 1;
        l_blnValueFound = MPE2ERRORCODEPARSER::GetErrorDescription(l_arrErrorsFound.ElementAt( l_intErrorNumber -1), l_strErrorName, l_strErrorDescription);
        if (l_blnValueFound == ASWGLOBAL::BOOL::TRUE)
        {
          if (l_strFullError != "")
          {
            l_strFullError = StrConcat2(l_strFullError, Translate("\n\n"));
          }
          l_strFullError = StrConcat8(l_strFullError, Translate("Error Number "), l_intErrorNumber, Translate(" - "), Translate("\""), l_strErrorName, Translate("\""), Translate("\n"));
          l_strFullError = StrConcat4(l_strFullError, Translate("\t"), l_strErrorDescription, Translate(""));
        }
      }
    }
    l_strErrorDescription = l_strFullError;
  }
  if (l_strErrorDescription != "")
  {
    l_strMessage = l_strErrorDescription;
  }
  customDialog_15.InitCustomDialog("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");
  customDialog_15.SetCustomDialogProperty( "Title", t_strMethodName );
  customDialog_15.SetCustomDialogProperty( "textBlock1.Text", i_strProcessDescription );
  customDialog_15.SetCustomDialogProperty( "textBlock2.Text", l_strMessage );
  customDialog_15.ShowCustomDialog();
  HSLMPELib::GetLastError(t_intDeviceID, 1, l_strMessage);
}

private function Device_Disconnect(  ) variable {
  private variable l_strFunctionName;
  private variable l_intReturnValue;
  private variable l_blnReturnValue;
  if (t_blnInstrumentConnected == ASWGLOBAL::BOOL::FALSE)
  {
    return (ASWGLOBAL::BOOL::TRUE);
  }
  l_strFunctionName = Translate("");
  {
       variable _intLength(0);
       string _strTmp;
       _strTmp = GetFunctionName();
       _intLength = _strTmp.GetLength();
       l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
  l_intReturnValue = HSLMPELib::Disconnect(t_intDeviceID);
  l_blnReturnValue = ASWGLOBAL::BOOL::FALSE;
  if (l_intReturnValue == 0)
  {
    l_blnReturnValue = ASWGLOBAL::BOOL::TRUE;
    t_blnInstrumentConnected = ASWGLOBAL::BOOL::FALSE;
    t_blnInstrumentInitialized = ASWGLOBAL::BOOL::FALSE;
  }
  else
  {
    Dialog_ErrorMessage(Translate("Error disconnecting [MPE]²"));
  }
  t_strSerialNumber = Translate("-----");
  t_intDeviceID = 0;
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  return (l_blnReturnValue);
}

private function Device_Initialize( variable i_blnForceInit ) variable {
  private variable l_strFunctionName;
  private variable l_intReturnValue;
  private variable l_strDataDefinition;
  private variable l_intWasteContainer;
  private variable l_blnReturnValue;
  if (t_blnInstrumentConnected == ASWGLOBAL::BOOL::FALSE)
  {
    return (ASWGLOBAL::BOOL::FALSE);
  }
  l_strFunctionName = Translate("");
  {
       variable _intLength(0);
       string _strTmp;
       _strTmp = GetFunctionName();
       _intLength = _strTmp.GetLength();
       l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
  l_strDataDefinition = StrConcat4(t_strDataDefinition, t_strMPESelected, Translate(""), Translate(""));
  CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyWasteContainer, 1, l_intWasteContainer);
  if (i_blnForceInit == ASWGLOBAL::BOOL::FALSE)
  {
    l_intReturnValue = HSLMPELib::InitializeWithParameters(t_intDeviceID, 1, l_intWasteContainer, 10, 0);
  }
  else
  {
    l_intReturnValue = HSLMPELib::InitializeWithParameters(t_intDeviceID, 0, l_intWasteContainer, 10, 0);
  }
  l_blnReturnValue = ASWGLOBAL::BOOL::FALSE;
  if (l_intReturnValue == 0)
  {
    l_blnReturnValue = ASWGLOBAL::BOOL::TRUE;
  }
  else
  {
    Dialog_ErrorMessage(Translate("Error initializing [MPE]²"));
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  return (l_blnReturnValue);
}

private function Device_VacuumTest(  ) void {
  private variable l_strFunctionName;
  private variable l_strDataDefinition;
  private variable l_intWasteContainer;
  private variable l_strMessage;
  private variable l_intReturnValue;
  private timer l_hdlTimer;
  private variable l_blnVacuumActive;
  private variable l_blnIsInitialized;
  if (t_blnInstrumentConnected == ASWGLOBAL::BOOL::FALSE)
  {
    return;
  }
  HSLMPELib::IsInitialized(t_intDeviceID, l_blnIsInitialized);
  if (l_blnIsInitialized == ASWGLOBAL::BOOL::FALSE)
  {
    Device_Initialize(ASWGLOBAL::BOOL::FALSE);
  }
  l_strFunctionName = Translate("");
  {
       variable _intLength(0);
       string _strTmp;
       _strTmp = GetFunctionName();
       _intLength = _strTmp.GetLength();
       l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
  l_strDataDefinition = StrConcat4(t_strDataDefinition, t_strMPESelected, Translate(""), Translate(""));
  CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyWasteContainer, 1, l_intWasteContainer);
  HSLMPELib::GetLastError(t_blnSimulaitonMode, 1, l_strMessage);
  l_intReturnValue = HSLMPELib::StartMPEVacuum(t_intDeviceID, l_intWasteContainer, 0);
  l_hdlTimer.SetTimerViewName("Vacuum Timer");
  if( 0 == l_hdlTimer.SetTimer(10) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == l_hdlTimer.WaitTimer(hslTrue, hslFalse) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  HSLMPELib::GetVacuumStatus(t_intDeviceID, l_blnVacuumActive);
  HSLMPELib::StopVacuum(t_intDeviceID);
  if (t_blnSimulaitonMode == ASWGLOBAL::BOOL::TRUE)
  {
    l_blnVacuumActive = ASWGLOBAL::BOOL::TRUE;
  }
  _UpdateResults(t_strKeyVacuumResult, t_strKeyVacuumDate, l_blnVacuumActive);
  if (l_intReturnValue > 0)
  {
    Dialog_ErrorMessage(Translate("Error testing Vacuum"));
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
}

private function _UpdateResults( variable i_strKeyTest, variable i_strKeyDate, variable i_blnResult ) void {
  private variable l_strDataDefinition;
  private variable l_strDate;
  private variable l_strTime;
  private variable l_strResultTime;
  l_strDataDefinition = StrConcat4(t_strDataDefinition, t_strMPESelected, Translate(""), Translate(""));
  l_strDate = TimGetFormattedDate(Translate("%m/%d/%Y"));
  l_strTime = TimGetFormattedTime(Translate("%H:%M"));
  l_strResultTime = StrConcat4(l_strDate, Translate(" "), l_strTime, Translate(""));
  CONFIGHELPER::CREATE_AddNewValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceResults, i_strKeyTest, 3, i_blnResult);
  CONFIGHELPER::CREATE_AddNewValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceResults, i_strKeyDate, 0, l_strResultTime);
}

private function _GetSummaryString( variable & o_strSummary ) void {
  private variable l_strDataDefinition;
  private variable l_strDate;
  private variable l_blnValueFound;
  private variable l_blnResult;
  private variable l_fltCV;
  private variable l_fltAVG;
  private variable l_strResults;
  private variable l_strIndent;
  o_strSummary = 0;
  o_strSummary = Translate("");
  l_strDataDefinition = StrConcat4(t_strDataDefinition, t_strMPESelected, Translate(""), Translate(""));
  l_blnValueFound = CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceResults, t_strKeyVacuumDate, 0, l_strDate);
  l_blnValueFound = CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceResults, t_strKeyVacuumResult, 3, l_blnResult);
  if (l_blnValueFound == ASWGLOBAL::BOOL::TRUE)
  {
    if (l_blnResult == ASWGLOBAL::BOOL::TRUE)
    {
      o_strSummary = StrConcat4(o_strSummary, Translate("Vacuum:          "), Translate("Pass"), Translate(""));
    }
    else
    {
      o_strSummary = StrConcat4(o_strSummary, Translate("Vacuum:          "), Translate("Fail"), Translate(""));
    }
    o_strSummary = StrConcat4(o_strSummary, Translate("  -  "), l_strDate, Translate("\n\n"));
  }
  else
  {
    o_strSummary = StrConcat4(o_strSummary, Translate("Vacuum:          "), Translate("Not Run!"), Translate("\n\n"));
  }
  l_blnValueFound = CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceResults, t_strKeyManifoldDate, 0, l_strDate);
  l_blnValueFound = CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceResults, t_strKeyManifoldResult, 3, l_blnResult);
  if (l_blnValueFound == ASWGLOBAL::BOOL::TRUE)
  {
    if (l_blnResult == ASWGLOBAL::BOOL::TRUE)
    {
      o_strSummary = StrConcat4(o_strSummary, Translate("Manifold:        "), Translate("Pass"), Translate(""));
    }
    else
    {
      o_strSummary = StrConcat4(o_strSummary, Translate("Manifold:        "), Translate("Fail"), Translate(""));
    }
    o_strSummary = StrConcat4(o_strSummary, Translate("  -  "), l_strDate, Translate("\n\n"));
  }
  else
  {
    o_strSummary = StrConcat4(o_strSummary, Translate("Manifold:        "), Translate("Not Run!"), Translate("\n\n"));
  }
  l_blnValueFound = CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceResults, t_strKeyEvaporatorDate, 0, l_strDate);
  l_blnValueFound = CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceResults, t_strKeyEvaporatorResult, 3, l_blnResult);
  if (l_blnValueFound == ASWGLOBAL::BOOL::TRUE)
  {
    if (l_blnResult == ASWGLOBAL::BOOL::TRUE)
    {
      o_strSummary = StrConcat4(o_strSummary, Translate("Evaporator:     "), Translate("Pass"), Translate(""));
    }
    else
    {
      o_strSummary = StrConcat4(o_strSummary, Translate("Evaporator:     "), Translate("Fail"), Translate(""));
    }
    o_strSummary = StrConcat4(o_strSummary, Translate("  -  "), l_strDate, Translate("\n\n"));
  }
  else
  {
    o_strSummary = StrConcat4(o_strSummary, Translate("Evaporator:     "), Translate("Not Run!"), Translate("\n\n"));
  }
  l_blnValueFound = CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceResults, t_strKeyReagentDate, 0, l_strDate);
  l_blnValueFound = CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceResults, t_strKeyReagentResult, 3, l_blnResult);
  if (l_blnValueFound == ASWGLOBAL::BOOL::TRUE)
  {
    if (l_blnResult == ASWGLOBAL::BOOL::TRUE)
    {
      o_strSummary = StrConcat4(o_strSummary, Translate("Reagent:         "), Translate("Pass"), Translate(""));
    }
    else
    {
      o_strSummary = StrConcat4(o_strSummary, Translate("Reagent:         "), Translate("Fail"), Translate(""));
    }
    o_strSummary = StrConcat4(o_strSummary, Translate("  -  "), l_strDate, Translate("\n\n"));
  }
  else
  {
    o_strSummary = StrConcat4(o_strSummary, Translate("Reagent:         "), Translate("Not Run!"), Translate("\n\n"));
  }
  l_blnValueFound = CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceResults, t_strKeyReagentCVDate, 0, l_strDate);
  l_blnValueFound = CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceResults, t_strKeyReagentCVResult, 3, l_blnResult);
  CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceResults, t_strKeyReagentCVCV, 2, l_fltCV);
  CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceResults, t_strKeyReagentCVAVG, 2, l_fltAVG);
  if (l_blnValueFound == ASWGLOBAL::BOOL::TRUE)
  {
    l_strIndent = Translate("                               ");
    l_strResults = StrConcat8(l_strIndent, Translate("-  Avg: "), l_fltAVG, Translate("\n"), l_strIndent, Translate("-  CV: "), l_fltCV, Translate("%"));
    if (l_blnResult == ASWGLOBAL::BOOL::TRUE)
    {
      o_strSummary = StrConcat4(o_strSummary, Translate("Reagent CV:   "), Translate("Pass"), Translate(""));
    }
    else
    {
      o_strSummary = StrConcat4(o_strSummary, Translate("Reagent CV:   "), Translate("Fail"), Translate(""));
    }
    o_strSummary = StrConcat4(o_strSummary, Translate("  -  "), l_strDate, Translate("\n"));
    o_strSummary = StrConcat4(o_strSummary, l_strResults, Translate(""), Translate("\n"));
  }
  else
  {
    o_strSummary = StrConcat4(o_strSummary, Translate("Reagent CV:    "), Translate("Not Run!"), Translate("\n\n"));
  }
}

private function Results_GetResults( variable & o_blnVacuum, variable & o_blnManifold, variable & o_blnEvaporator, variable & o_blnReagent ) void {
  private variable l_strFunctionName;
  private variable l_strDataDefinition;
  private variable l_blnValueFound;
  o_blnVacuum = 0;
  o_blnManifold = 0;
  o_blnEvaporator = 0;
  o_blnReagent = 0;
  l_strFunctionName = Translate("");
  {
       variable _intLength(0);
       string _strTmp;
       _strTmp = GetFunctionName();
       _intLength = _strTmp.GetLength();
       l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
  l_strDataDefinition = StrConcat4(t_strDataDefinition, t_strMPESelected, Translate(""), Translate(""));
  l_blnValueFound = CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceResults, t_strKeyVacuumResult, 3, o_blnVacuum);
  if (l_blnValueFound == ASWGLOBAL::BOOL::FALSE)
  {
    o_blnVacuum = ASWGLOBAL::BOOL::FALSE;
  }
  l_blnValueFound = CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceResults, t_strKeyManifoldResult, 3, o_blnManifold);
  if (l_blnValueFound == ASWGLOBAL::BOOL::FALSE)
  {
    o_blnManifold = ASWGLOBAL::BOOL::FALSE;
  }
  l_blnValueFound = CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceResults, t_strKeyEvaporatorResult, 3, o_blnEvaporator);
  if (l_blnValueFound == ASWGLOBAL::BOOL::FALSE)
  {
    o_blnEvaporator = ASWGLOBAL::BOOL::FALSE;
  }
  l_blnValueFound = CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceResults, t_strKeyReagentResult, 3, o_blnReagent);
  if (l_blnValueFound == ASWGLOBAL::BOOL::FALSE)
  {
    o_blnReagent = ASWGLOBAL::BOOL::FALSE;
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
}

private function Device_ManifoldTest(  ) void {
  private variable l_strFunctionName;
  private variable l_blnIsInitialized;
  private variable l_strLowTestString;
  private variable l_strHighTestString;
  private variable retValueDialog;
  private variable l_intReturnValue;
  private dialog customDialog_16;
  private dialog customDialog_17;
  private variable l_intForkID;
  private dialog customDialog_18;
  if (t_blnInstrumentConnected == ASWGLOBAL::BOOL::FALSE)
  {
    return;
  }
  HSLMPELib::IsInitialized(t_intDeviceID, l_blnIsInitialized);
  if (l_blnIsInitialized == ASWGLOBAL::BOOL::FALSE)
  {
    Device_Initialize(ASWGLOBAL::BOOL::FALSE);
  }
  l_strFunctionName = Translate("");
  {
       variable _intLength(0);
       string _strTmp;
       _strTmp = GetFunctionName();
       _intLength = _strTmp.GetLength();
       l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
  l_strLowTestString = Translate("pressure,1,60;pressure,10,60;pressure,15,60;");
  l_strHighTestString = Translate("pressure,1,60;pressure,10,60;pressure,15,60;pressure,60,60;");
  t_blnPressureMonitor = ASWGLOBAL::BOOL::TRUE;
  l_intForkID = 0;
  customDialog_17.InitCustomDialog("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");
  customDialog_17.SetCustomDialogProperty( "Title", t_strMethodName );
  customDialog_17.ShowCustomDialog();
  retValueDialog = customDialog_17.GetCustomDialogProperty( "ReturnValue" );
  l_intForkID = Fork("_MonitorPressure");
  l_intReturnValue = HSLMPELib::FilterPlatePlaced(t_intDeviceID, 14.5, 15.0);
  if (l_intReturnValue > 0)
  {
    t_blnPressureMonitor = ASWGLOBAL::BOOL::FALSE;
    _UpdateResults(t_strKeyManifoldResult, t_strKeyManifoldDate, ASWGLOBAL::BOOL::FALSE);
    Dialog_ErrorMessage(Translate("Error Manifold Test - Filter Plate Placed"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    return;
  }
  l_intReturnValue = HSLMPELib::ClampFilterPlate(t_intDeviceID);
  if (l_intReturnValue > 0)
  {
    t_blnPressureMonitor = ASWGLOBAL::BOOL::FALSE;
    _UpdateResults(t_strKeyManifoldResult, t_strKeyManifoldDate, ASWGLOBAL::BOOL::FALSE);
    Dialog_ErrorMessage(Translate("Error Manifold Test - Clamp Filter Plate"));
    HSLMPELib::FilterPlateRemoved(t_intDeviceID);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    return;
  }
  l_intReturnValue = HSLMPELib::CollectionPlatePlaced(t_intDeviceID, 15.0, 5.0);
  if (l_intReturnValue > 0)
  {
    t_blnPressureMonitor = ASWGLOBAL::BOOL::FALSE;
    _UpdateResults(t_strKeyManifoldResult, t_strKeyManifoldDate, ASWGLOBAL::BOOL::FALSE);
    Dialog_ErrorMessage(Translate("Error Manifold Test - Collection Plate Placed"));
    HSLMPELib::FilterPlateRemoved(t_intDeviceID);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    return;
  }
  l_intReturnValue = HSLMPELib::ProcessFilterToCollectionPlate(t_intDeviceID, l_strLowTestString, ASWGLOBAL::BOOL::FALSE);
  if (l_intReturnValue > 0)
  {
    t_blnPressureMonitor = ASWGLOBAL::BOOL::FALSE;
    _UpdateResults(t_strKeyManifoldResult, t_strKeyManifoldDate, ASWGLOBAL::BOOL::FALSE);
    Dialog_ErrorMessage(Translate("Error Manifold Test - Low PSI"));
    l_intReturnValue = HSLMPELib::CollectionPlateRemoved(t_intDeviceID);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    return;
  }
  l_intReturnValue = HSLMPELib::CollectionPlateRemoved(t_intDeviceID);
  if (l_intReturnValue > 0)
  {
    t_blnPressureMonitor = ASWGLOBAL::BOOL::FALSE;
    _UpdateResults(t_strKeyManifoldResult, t_strKeyManifoldDate, ASWGLOBAL::BOOL::FALSE);
    Dialog_ErrorMessage(Translate("Error Manifold Test - Collection Plate Removed"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    return;
  }
  l_intReturnValue = HSLMPELib::RetrieveFilterPlate(t_intDeviceID);
  if (l_intReturnValue > 0)
  {
    t_blnPressureMonitor = ASWGLOBAL::BOOL::FALSE;
    _UpdateResults(t_strKeyManifoldResult, t_strKeyManifoldDate, ASWGLOBAL::BOOL::FALSE);
    Dialog_ErrorMessage(Translate("Error Manifold Test - Retrieve Filter Plate"));
    HSLMPELib::FilterPlateRemoved(t_intDeviceID);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    return;
  }
  l_intReturnValue = HSLMPELib::FilterPlateRemoved(t_intDeviceID);
  if (l_intReturnValue > 0)
  {
    t_blnPressureMonitor = ASWGLOBAL::BOOL::FALSE;
    _UpdateResults(t_strKeyManifoldResult, t_strKeyManifoldDate, ASWGLOBAL::BOOL::FALSE);
    Dialog_ErrorMessage(Translate("Error Manifold Test - Filter Plate Removed"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    return;
  }
  customDialog_18.InitCustomDialog("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");
  customDialog_18.SetCustomDialogProperty( "Title", t_strMethodName );
  customDialog_18.ShowCustomDialog();
  retValueDialog = customDialog_18.GetCustomDialogProperty( "ReturnValue" );
  l_intReturnValue = HSLMPELib::FilterPlatePlaced(t_intDeviceID, 14.0, 15.0);
  if (l_intReturnValue > 0)
  {
    t_blnPressureMonitor = ASWGLOBAL::BOOL::FALSE;
    _UpdateResults(t_strKeyManifoldResult, t_strKeyManifoldDate, ASWGLOBAL::BOOL::FALSE);
    Dialog_ErrorMessage(Translate("Error Manifold Test - Filter Plate Placed"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    return;
  }
  l_intReturnValue = HSLMPELib::ClampFilterPlate(t_intDeviceID);
  if (l_intReturnValue > 0)
  {
    t_blnPressureMonitor = ASWGLOBAL::BOOL::FALSE;
    _UpdateResults(t_strKeyManifoldResult, t_strKeyManifoldDate, ASWGLOBAL::BOOL::FALSE);
    Dialog_ErrorMessage(Translate("Error Manifold Test - Clamp Filter Plate"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    return;
  }
  l_intReturnValue = HSLMPELib::CollectionPlatePlaced(t_intDeviceID, 15.0, 5.0);
  if (l_intReturnValue > 0)
  {
    t_blnPressureMonitor = ASWGLOBAL::BOOL::FALSE;
    _UpdateResults(t_strKeyManifoldResult, t_strKeyManifoldDate, ASWGLOBAL::BOOL::FALSE);
    Dialog_ErrorMessage(Translate("Error Manifold Test - Collection Plate Placed"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    return;
  }
  l_intReturnValue = HSLMPELib::ProcessFilterToCollectionPlate(t_intDeviceID, l_strHighTestString, ASWGLOBAL::BOOL::FALSE);
  if (l_intReturnValue > 0)
  {
    t_blnPressureMonitor = ASWGLOBAL::BOOL::FALSE;
    _UpdateResults(t_strKeyManifoldResult, t_strKeyManifoldDate, ASWGLOBAL::BOOL::FALSE);
    Dialog_ErrorMessage(Translate("Error Manifold Test - High PSI"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    return;
  }
  l_intReturnValue = HSLMPELib::CollectionPlateRemoved(t_intDeviceID);
  if (l_intReturnValue > 0)
  {
    t_blnPressureMonitor = ASWGLOBAL::BOOL::FALSE;
    _UpdateResults(t_strKeyManifoldResult, t_strKeyManifoldDate, ASWGLOBAL::BOOL::FALSE);
    Dialog_ErrorMessage(Translate("Error Manifold Test - Collection Plate Removed"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    return;
  }
  l_intReturnValue = HSLMPELib::RetrieveFilterPlate(t_intDeviceID);
  if (l_intReturnValue > 0)
  {
    t_blnPressureMonitor = ASWGLOBAL::BOOL::FALSE;
    _UpdateResults(t_strKeyManifoldResult, t_strKeyManifoldDate, ASWGLOBAL::BOOL::FALSE);
    Dialog_ErrorMessage(Translate("Error Manifold Test - Retrieve Filter Plate"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    return;
  }
  l_intReturnValue = HSLMPELib::FilterPlateRemoved(t_intDeviceID);
  if (l_intReturnValue > 0)
  {
    t_blnPressureMonitor = ASWGLOBAL::BOOL::FALSE;
    _UpdateResults(t_strKeyManifoldResult, t_strKeyManifoldDate, ASWGLOBAL::BOOL::FALSE);
    Dialog_ErrorMessage(Translate("Error Manifold Test - Filter Plate Removed"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    return;
  }
  t_blnPressureMonitor = ASWGLOBAL::BOOL::FALSE;
  Join(l_intForkID,hslInfinite);
  _UpdateResults(t_strKeyManifoldResult, t_strKeyManifoldDate, ASWGLOBAL::BOOL::TRUE);
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
}

private function Device_ReagentTest( variable i_blnDrainLine ) void {
  private variable l_blnIsInitialized;
  private variable l_strFunctionName;
  private variable retValueDialog;
  private variable l_strDataDefinition;
  private variable l_intWasteContainer;
  private variable l_intReturnValue;
  private dialog customDialog_19;
  private variable l_blnResult;
  private dialog customDialog_20;
  private dialog customDialog_21;
  private dialog customDialog_22;
  private dialog customDialog_23;
  private dialog customDialog_24;
  private variable l_intCountNeedles;
  if (t_blnInstrumentConnected == ASWGLOBAL::BOOL::FALSE)
  {
    return;
  }
  HSLMPELib::IsInitialized(t_intDeviceID, l_blnIsInitialized);
  if (l_blnIsInitialized == ASWGLOBAL::BOOL::FALSE)
  {
    Device_Initialize(ASWGLOBAL::BOOL::FALSE);
  }
  l_strDataDefinition = StrConcat4(t_strDataDefinition, t_strMPESelected, Translate(""), Translate(""));
  CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyNumNeedles, 1, l_intCountNeedles);
  if (l_intCountNeedles < 8)
  {
    MECC::TraceComment(Translate("REAGENT PLATE TEST IS ONLY AVAILABLE FOR 8 NEEDLE SYSTEMS!"));
    return;
  }
  l_strFunctionName = Translate("");
  {
       variable _intLength(0);
       string _strTmp;
       _strTmp = GetFunctionName();
       _intLength = _strTmp.GetLength();
       l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
  CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyWasteContainer, 1, l_intWasteContainer);
  if (t_blnDispenserPrimed == ASWGLOBAL::BOOL::FALSE)
  {
    customDialog_23.InitCustomDialog("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");
    customDialog_23.SetCustomDialogProperty( "Title", t_strMethodName );
    customDialog_23.ShowCustomDialog();
    retValueDialog = customDialog_23.GetCustomDialogProperty( "ReturnValue" );
    l_intReturnValue = HSLMPELib::Prime(t_intDeviceID, 1, 50000.0, 900.0, l_intWasteContainer);
    t_blnDispenserPrimed = ASWGLOBAL::BOOL::TRUE;
  }
  if (l_intReturnValue > 0)
  {
    _UpdateResults(t_strKeyReagentResult, t_strKeyReagentDate, ASWGLOBAL::BOOL::FALSE);
    Dialog_ErrorMessage(Translate("Error Reagent Test - Prime"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    return;
  }
  customDialog_20.InitCustomDialog("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");
  customDialog_20.SetCustomDialogProperty( "Title", t_strMethodName );
  customDialog_20.ShowCustomDialog();
  retValueDialog = customDialog_20.GetCustomDialogProperty( "ReturnValue" );
  HSLMPELib::FilterPlatePlaced(t_intDeviceID, 14.5, 15.0);
  l_intReturnValue = HSLMPELib::Dispense(t_intDeviceID, 1, 250.0, 750.0, 2.0);
  if (l_intReturnValue > 0)
  {
    HSLMPELib::FilterPlateRemoved(t_intDeviceID);
    _UpdateResults(t_strKeyReagentResult, t_strKeyReagentDate, ASWGLOBAL::BOOL::FALSE);
    Dialog_ErrorMessage(Translate("Error Reagent Test - Dispense"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    return;
  }
  HSLMPELib::FilterPlateRemoved(t_intDeviceID);
  customDialog_19.InitCustomDialog("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");
  customDialog_19.SetCustomDialogProperty( "Title", t_strMethodName );
  customDialog_19.ShowCustomDialog();
  retValueDialog = customDialog_19.GetCustomDialogProperty( "ReturnValue" );
  l_blnResult = customDialog_19.GetCustomDialogProperty( "radioButton1.IsChecked" );
  _UpdateResults(t_strKeyReagentResult, t_strKeyReagentDate, l_blnResult);
  if (i_blnDrainLine == ASWGLOBAL::BOOL::TRUE)
  {
    customDialog_24.InitCustomDialog("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");
    customDialog_24.SetCustomDialogProperty( "Title", t_strMethodName );
    customDialog_24.ShowCustomDialog();
    retValueDialog = customDialog_24.GetCustomDialogProperty( "ReturnValue" );
    l_intReturnValue = HSLMPELib::Prime(t_intDeviceID, 1, 30000.0, 1000.0, l_intWasteContainer);
    if (l_intReturnValue > 0)
    {
      Dialog_ErrorMessage(Translate("Error Reagent Test - Drain"));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
      return;
    }
    t_blnDispenserPrimed = ASWGLOBAL::BOOL::FALSE;
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
}

private function Device_EvaporatorTest(  ) void {
  private variable l_blnIsInitialized;
  private variable l_strFunctionName;
  private dialog customDialog_25;
  private variable retValueDialog;
  private variable l_intReturnValue;
  private timer l_hdlPauseTime;
  private variable l_intForkID;
  private dialog customDialog_26;
  private dialog dialogHandle_27;
  if (t_blnInstrumentConnected == ASWGLOBAL::BOOL::FALSE)
  {
    return;
  }
  HSLMPELib::IsInitialized(t_intDeviceID, l_blnIsInitialized);
  if (l_blnIsInitialized == ASWGLOBAL::BOOL::FALSE)
  {
    Device_Initialize(ASWGLOBAL::BOOL::FALSE);
  }
  l_strFunctionName = Translate("");
  {
       variable _intLength(0);
       string _strTmp;
       _strTmp = GetFunctionName();
       _intLength = _strTmp.GetLength();
       l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
  t_blnEvaporatorMonitor = ASWGLOBAL::BOOL::TRUE;
  customDialog_25.InitCustomDialog("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");
  customDialog_25.SetCustomDialogProperty( "Title", t_strMethodName );
  customDialog_25.ShowCustomDialog();
  retValueDialog = customDialog_25.GetCustomDialogProperty( "ReturnValue" );
  l_intForkID = 0;
  l_intForkID = Fork("_MonitorEvaporatorModule");
  l_intReturnValue = HSLMPELib::EvaporatePrepare(t_intDeviceID, 60.0, 11.0, 0);
  if (l_intReturnValue > 0)
  {
    t_blnEvaporatorMonitor = ASWGLOBAL::BOOL::FALSE;
    _UpdateResults(t_strKeyEvaporatorResult, t_strKeyEvaporatorDate, ASWGLOBAL::BOOL::FALSE);
    Dialog_ErrorMessage(Translate("Error Evaporator Test - Heat"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    return;
  }
  if (t_blnSimulaitonMode == ASWGLOBAL::BOOL::TRUE)
  {
    l_hdlPauseTime.SetTimerViewName("Simulation Pause Time");
    if( 0 == l_hdlPauseTime.SetTimer(600) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == l_hdlPauseTime.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
  }
  else
  {
    l_hdlPauseTime.SetTimerViewName("Simulation Pause Time");
    if( 0 == l_hdlPauseTime.SetTimer(180) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == l_hdlPauseTime.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
  }
  l_intReturnValue = HSLMPELib::EvaporateEnd(t_intDeviceID, 0);
  if (l_intReturnValue > 0)
  {
    t_blnEvaporatorMonitor = ASWGLOBAL::BOOL::FALSE;
    _UpdateResults(t_strKeyEvaporatorResult, t_strKeyEvaporatorDate, ASWGLOBAL::BOOL::FALSE);
    Dialog_ErrorMessage(Translate("Error Evaporator Test - Cool"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    return;
  }
  if (t_blnSmallTankTest == ASWGLOBAL::BOOL::TRUE)
  {
    dialogHandle_27.SetOutput(Translate("Pause for the tank to refill..."));
    dialogHandle_27.ShowOutput(Translate("Pause for tank..."), hslOKOnly | hslInformation | hslDefButton1, 300);
  }
  l_intReturnValue = HSLMPELib::EvaporatePrepare(t_intDeviceID, 60.0, 60.0, 0);
  if (l_intReturnValue > 0)
  {
    t_blnEvaporatorMonitor = ASWGLOBAL::BOOL::FALSE;
    _UpdateResults(t_strKeyEvaporatorResult, t_strKeyEvaporatorDate, ASWGLOBAL::BOOL::FALSE);
    Dialog_ErrorMessage(Translate("Error Evaporator Test - Heat"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    return;
  }
  if (t_blnSimulaitonMode == ASWGLOBAL::BOOL::TRUE)
  {
    l_hdlPauseTime.SetTimerViewName("Simulation Pause Time");
    if( 0 == l_hdlPauseTime.SetTimer(600) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == l_hdlPauseTime.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
  }
  else
  {
    if (t_blnSmallTankTest == ASWGLOBAL::BOOL::FALSE)
    {
      l_hdlPauseTime.SetTimerViewName("Simulation Pause Time");
      if( 0 == l_hdlPauseTime.SetTimer(180) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == l_hdlPauseTime.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
  }
  l_intReturnValue = HSLMPELib::EvaporateEnd(t_intDeviceID, 0);
  if (l_intReturnValue > 0)
  {
    t_blnEvaporatorMonitor = ASWGLOBAL::BOOL::FALSE;
    _UpdateResults(t_strKeyEvaporatorResult, t_strKeyEvaporatorDate, ASWGLOBAL::BOOL::FALSE);
    Dialog_ErrorMessage(Translate("Error Evaporator Test - Cool"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    return;
  }
  t_blnEvaporatorMonitor = ASWGLOBAL::BOOL::FALSE;
  Join(l_intForkID,hslInfinite);
  _UpdateResults(t_strKeyEvaporatorResult, t_strKeyEvaporatorDate, ASWGLOBAL::BOOL::TRUE);
  customDialog_26.InitCustomDialog("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");
  customDialog_26.SetCustomDialogProperty( "Title", t_strMethodName );
  customDialog_26.ShowCustomDialog();
  retValueDialog = customDialog_26.GetCustomDialogProperty( "ReturnValue" );
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
}

private function _MonitorEvaporatorModule(  ) void {
  private variable l_blnFileExists;
  private variable l_intReadTime;
  private variable l_fltCurrentTemp;
  private variable l_intHeaterOn;
  private variable l_fltTargetTemp;
  private variable l_intReadID;
  private file l_hdlWriteFile;
  private timer l_hdlTotalTime;
  private variable l_fltCurrentGasTemp;
  private variable l_fltMinGasTemp;
  private variable l_fltMaxGasTemp;
  private variable l_fltMinEvaporatorTemp;
  private variable l_fltMaxEvaporatorTemp;
  private timer l_hdlPause;
  l_blnFileExists = HSLExtensions::File::Exists(t_strMonitorEvapFilePath);
  if (l_blnFileExists == ASWGLOBAL::BOOL::TRUE)
  {
    HSLExtensions::File::Delete(t_strMonitorEvapFilePath);
  }
  l_hdlWriteFile.AddField("ReadID", l_intReadID, hslInteger);
  l_hdlWriteFile.AddField("ReadTime", l_intReadTime, hslInteger);
  l_hdlWriteFile.AddField("HeaterOn", l_intHeaterOn, hslInteger);
  l_hdlWriteFile.AddField("TargetTemp", l_fltTargetTemp, hslFloat);
  l_hdlWriteFile.AddField("EvaporatorTemp", l_fltCurrentTemp, hslFloat);
  l_hdlWriteFile.AddField("GasTemp", l_fltCurrentGasTemp, hslFloat);
  l_hdlWriteFile.SetDelimiter(hslCSVDelimited);
  if( 0 == l_hdlWriteFile.Open(t_strMonitorEvapFilePath, hslAppend) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strMonitorEvapFilePath, "HxMetEdCompCmd");
  }
  l_hdlPause.SetTimerViewName("");
  if( 0 == l_hdlPause.SetTimer(5) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == l_hdlPause.WaitTimer(hslFalse, hslFalse) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  l_hdlTotalTime.SetTimerViewName("");
  if( 0 == l_hdlTotalTime.SetTimer(hslInfinite) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  HSLMPELib::GetHeaterTemperatureRange(t_intDeviceID, 1, l_fltMinEvaporatorTemp, l_fltMaxEvaporatorTemp, l_fltMinGasTemp, l_fltMaxGasTemp, l_fltTargetTemp, l_intHeaterOn);
  {
    l_intReadID = 0;
    while (t_blnEvaporatorMonitor == ASWGLOBAL::BOOL::TRUE)
    {
      l_intReadID = l_intReadID + 1;
      l_intReadTime = l_hdlTotalTime.GetElapsedTime();
      HSLMPELib::GetHeaterTemperatureRange(t_intDeviceID, 0, l_fltMinEvaporatorTemp, l_fltMaxEvaporatorTemp, l_fltMinGasTemp, l_fltMaxGasTemp, l_fltTargetTemp, l_intHeaterOn);
      HSLMPELib::GetCurrentHeaterStatus(t_intDeviceID, 0, l_fltCurrentTemp, l_fltCurrentGasTemp, l_intHeaterOn);
      if( 0 == l_hdlWriteFile.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      l_hdlPause.SetTimerViewName("");
      if( 0 == l_hdlPause.SetTimer(1) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == l_hdlPause.WaitTimer(hslFalse, hslFalse) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
  }
  if( 0 != l_hdlWriteFile.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  l_hdlWriteFile.RemoveFields();
}

private function _GetListOfMPE( variable & o_arrMPEs[] ) variable {
  private variable l_intTotalValues;
  private variable l_intIndex;
  private variable l_intMPE;
  private variable l_strDataDefinition;
  private variable l_strSN;
  private variable l_blnValueFound;
  private variable l_intMPESet;
  o_arrMPEs.SetSize( 0);
  o_arrMPEs.SetSize(0);
  l_intTotalValues=t_arrMPESelection.GetSize();
  l_intMPESet = 0;
  {
    for(l_intIndex = 0; l_intIndex < l_intTotalValues;)
    {
      l_intIndex = l_intIndex + 1;
      l_intMPE=t_arrMPESelection.GetAt(l_intIndex-1);
      l_strDataDefinition = StrConcat4(t_strDataDefinition, l_intMPE, Translate(""), Translate(""));
      l_blnValueFound = CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeySN, 0, l_strSN);
      if (l_blnValueFound == ASWGLOBAL::BOOL::FALSE)
      {
        l_strSN = Translate("Not Set");
      }
      else
      {
        l_intMPESet = l_intMPESet + 1;
      }
      o_arrMPEs.AddAsLast(l_strSN);
    }
  }
  return (l_intMPESet);
}

private function _MonitorPressure(  ) void {
  private variable l_intReadTime;
  private variable l_blnFileExists;
  private variable l_intReadID;
  private timer l_hdlTotalTime;
  private timer l_hdlPause;
  private file l_hdlWriteFile;
  private variable l_fltLowPressureSensor;
  private variable l_fltHighPressureSensor;
  private variable l_fltInputPressure;
  private variable l_fltManifoldPressure;
  l_blnFileExists = HSLExtensions::File::Exists(t_strMonitorPressureFilePath);
  if (l_blnFileExists == ASWGLOBAL::BOOL::TRUE)
  {
    HSLExtensions::File::Delete(t_strMonitorPressureFilePath);
  }
  l_hdlWriteFile.AddField("ReadID", l_intReadID, hslInteger);
  l_hdlWriteFile.AddField("ReadTime", l_intReadTime, hslInteger);
  l_hdlWriteFile.AddField("InputPressure", l_fltInputPressure, hslFloat);
  l_hdlWriteFile.AddField("ManifoldPressure", l_fltManifoldPressure, hslFloat);
  l_hdlWriteFile.AddField("HighPressureSensor", l_fltHighPressureSensor, hslFloat);
  l_hdlWriteFile.AddField("LowPressureSensor", l_fltLowPressureSensor, hslFloat);
  l_hdlWriteFile.SetDelimiter(hslCSVDelimited);
  if( 0 == l_hdlWriteFile.Open(t_strMonitorPressureFilePath, hslAppend) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strMonitorPressureFilePath, "HxMetEdCompCmd");
  }
  l_hdlPause.SetTimerViewName("");
  if( 0 == l_hdlPause.SetTimer(1) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == l_hdlPause.WaitTimer(hslFalse, hslFalse) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  l_hdlTotalTime.SetTimerViewName("");
  if( 0 == l_hdlTotalTime.SetTimer(hslInfinite) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  {
    l_intReadID = 0;
    while (t_blnPressureMonitor == ASWGLOBAL::BOOL::TRUE)
    {
      l_intReadID = l_intReadID + 1;
      l_intReadTime = l_hdlTotalTime.GetElapsedTime();
      HSLMPELib::GetPressureSensorReadings(t_intDeviceID, l_fltInputPressure, l_fltManifoldPressure, l_fltHighPressureSensor, l_fltLowPressureSensor);
      if( 0 == l_hdlWriteFile.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      l_hdlPause.SetTimerViewName("");
      if( 0 == l_hdlPause.SetTimer(1) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == l_hdlPause.WaitTimer(hslFalse, hslFalse) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
  }
  if( 0 != l_hdlWriteFile.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  l_hdlWriteFile.RemoveFields();
}

private function Settings_DeleteConfig(  ) void {
  private dialog customDialog_28;
  private dialog customDialog_29;
  private dialog customDialog_30;
  private dialog customDialog_31;
  private dialog customDialog_32;
  private variable l_blnConnectIP;
  private variable l_blnWasteContainer0;
  private variable l_blnWasteContainer1;
  private variable l_intBaudRate;
  private variable l_intMPEOptions;
  private variable l_strDataDefinition;
  private variable l_strSN;
  private variable l_blnWasteContainer2;
  private variable l_blnEnableReagent;
  private variable l_intCOMPort;
  private variable l_blnValueCheck;
  private variable l_intWasteContainer;
  private variable l_blnFileExists;
  private variable l_intNumberOfNeedles;
  private variable l_strIPAddress;
  private variable l_blnEnableEvaporator;
  private variable l_blnConnectCOM;
  private variable l_intIPPort;
  private variable l_strFunctionName;
  l_strFunctionName = Translate("");
  {
       variable _intLength(0);
       string _strTmp;
       _strTmp = GetFunctionName();
       _intLength = _strTmp.GetLength();
       l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
  l_blnFileExists = HSLExtensions::File::Exists(t_strConfigFilePath);
  l_strDataDefinition = StrConcat4(t_strDataDefinition, t_strMPESelected, Translate(""), Translate(""));
  if (l_blnFileExists == ASWGLOBAL::BOOL::TRUE)
  {
    CONFIGHELPER::DELETE_RemoveDataDefinition(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection);
    CONFIGHELPER::DELETE_RemoveDataDefinition(t_strConfigFilePath, l_strDataDefinition, t_strInstanceResults);
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
}

private function Device_ReagentCVTest(  ) void {
  private variable l_strDataDefinition;
  private variable l_intWasteContainer;
  private variable l_blnIsInitialized;
  private variable l_strFunctionName;
  private variable l_blnFileExists;
  private variable l_intComPort;
  private variable l_blnValueFound;
  private variable l_blnQueryCOM;
  private dialog customDialog_33;
  private variable l_blnConnected;
  private dialog customDialog_34;
  private variable l_intCountNeedles;
  private variable l_blnReturnValue;
  private dialog customDialog_35;
  private dialog customDialog_36;
  private variable retValueDialog;
  private dialog customDialog_37;
  private variable l_intReturnValue;
  private dialog customDialog_38;
  private dialog customDialog_39;
  private dialog customDialog_40;
  private variable l_arrWellPattern[];
  private variable l_fltDispenseVolume;
  private dialog customDialog_41;
  private variable l_blnResult;
  private dialog customDialog_42;
  private variable t_blnSuccess;
  private dialog customDialog_43;
  private dialog customDialog_44;
  private variable l_blnSuccess;
  private dialog customDialog_45;
  private dialog customDialog_46;
  private dialog customDialog_47;
  private variable l_strMeasuredUnit;
  private variable l_strMeasuredWeight;
  private variable l_blnStability;
  private variable l_fltFullWeight;
  private variable l_intNeedleIndex;
  private variable l_fltVolumeDispensed;
  private variable l_fltLiquidWeight;
  private variable l_fltTubeWeight;
  private file l_hdlWriteFile;
  private variable l_fltCurrentWeight;
  private variable l_fltTubeWEight;
  private variable l_strTubeRemoval;
  private dialog customDialog_48;
  private dialog customDialog_49;
  private variable l_arrResults[];
  private variable l_fltStDev;
  private variable l_fltAvg;
  private variable l_fltCV;
  private variable l_fltPass;
  private dialog customDialog_50;
  private variable l_arrWellIDs[];
  private variable l_strWell;
  private variable l_fltIncreaseAmount;
  private file l_hdlReadFile;
  private variable l_intHalfNeedles;
  private variable l_intValueNumber;
  private dialog customDialog_51;
  private dialog customDialog_52;
  private dialog customDialog_53;
  private variable l_fltMaxWeight;
  private variable l_fltMinWeight;
  private variable l_fltCalibrationWeight;
  private dialog customDialog_54;
  private variable l_fltTemperature;
  private variable l_strCalibrationWeightNumber;
  private variable l_strBalanceSerialNumber;
  private variable l_strReportDate;
  private variable l_strFileDate;
  private variable l_strReportTime;
  private variable l_strFileTime;
  private variable l_strLogFolder;
  private variable l_strReportFile;
  private variable l_intRowIndex;
  private variable l_intRow;
  private variable l_blnPass;
  if (t_blnInstrumentConnected == ASWGLOBAL::BOOL::FALSE)
  {
    return;
  }
  HSLMPELib::IsInitialized(t_intDeviceID, l_blnIsInitialized);
  if (l_blnIsInitialized == ASWGLOBAL::BOOL::FALSE)
  {
    Device_Initialize(ASWGLOBAL::BOOL::FALSE);
  }
  l_strFunctionName = Translate("");
  {
       variable _intLength(0);
       string _strTmp;
       _strTmp = GetFunctionName();
       _intLength = _strTmp.GetLength();
       l_strFunctionName = _strTmp.Mid(9, _intLength - 9);
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - START"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
  l_strLogFolder = FilGetLogFilesPath();
  l_strReportDate = TimGetFormattedDate(Translate("%Y-%m-%d"));
  l_strReportTime = TimGetFormattedTime(Translate("%H:%M"));
  l_strFileDate = l_strReportDate;
  l_strFileTime = l_strReportTime;
  StrReplace(l_strFileDate, Translate("-"), Translate(""));
  StrReplace(l_strFileTime, Translate(":"), Translate(""));
  l_strReportFile = StrConcat8(l_strLogFolder, Translate("\\"), l_strFileDate, Translate("_"), l_strFileTime, Translate("_"), Translate("MPE2_ReagentCVResults"), Translate(".xls"));
  l_arrWellIDs.SetSize(0);
  l_arrWellIDs.AddAsLast(Translate("A1"));
  l_arrWellIDs.AddAsLast(Translate("B1"));
  l_arrWellIDs.AddAsLast(Translate("C1"));
  l_arrWellIDs.AddAsLast(Translate("D1"));
  l_arrWellIDs.AddAsLast(Translate("E1"));
  l_arrWellIDs.AddAsLast(Translate("F1"));
  l_arrWellIDs.AddAsLast(Translate("G1"));
  l_arrWellIDs.AddAsLast(Translate("H1"));
  l_intComPort = 1;
  l_blnQueryCOM = ASWGLOBAL::BOOL::TRUE;
  l_blnConnected = ASWGLOBAL::BOOL::FALSE;
  l_fltTemperature = 22.0;
  l_strBalanceSerialNumber = Translate("");
  l_strCalibrationWeightNumber = Translate("");
  l_fltDispenseVolume = 800.0 / (2 * 1.0);
  l_strDataDefinition = StrConcat4(t_strDataDefinition, t_strMPESelected, Translate(""), Translate(""));
  CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyWasteContainer, 1, l_intWasteContainer);
  CONFIGHELPER::VALUE_GetValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceConnection, t_strKeyNumNeedles, 1, l_intCountNeedles);
  customDialog_51.InitCustomDialog("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");
  customDialog_51.SetCustomDialogProperty( "Title", t_strMethodName );
  customDialog_51.SetCustomDialogProperty( "numeric1.Value", l_intComPort );
  customDialog_51.ShowCustomDialog();
  l_intComPort = customDialog_51.GetCustomDialogProperty( "numeric1.Value" );
  if (t_blnSimulaitonMode == ASWGLOBAL::BOOL::FALSE)
  {
    l_blnConnected = METTLER_WXS::Initialize(Translate(""), 2, l_intComPort, 60.0, 3);
    if (l_blnConnected == ASWGLOBAL::BOOL::FALSE)
    {
      HSLExtensions::File::Delete(t_strConfigBalancePath);
      ErrSetDescription(Translate("Could not connect to balance!  /n/nConfirm COM Port and restart the method to connect!"));
      _UpdateResultsCV(ASWGLOBAL::BOOL::FALSE, 0.0, 0.0);
      Dialog_ErrorMessageGeneric(Translate("Connect to the balance"));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
      return;
    }
    METTLER_WXS::GetSerialNumber(l_strBalanceSerialNumber);
  }
  if (t_blnSimulaitonMode == ASWGLOBAL::BOOL::FALSE)
  {
    l_blnReturnValue = METTLER_WXS::ResetScale();
    if (l_blnReturnValue == ASWGLOBAL::BOOL::FALSE)
    {
      METTLER_WXS::Terminate();
      ErrSetDescription(Translate("Could not Reset balance!"));
      _UpdateResultsCV(ASWGLOBAL::BOOL::FALSE, 0.0, 0.0);
      Dialog_ErrorMessageGeneric(Translate("Reset the balance"));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
      return;
    }
  }
  customDialog_54.InitCustomDialog("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");
  customDialog_54.SetCustomDialogProperty( "Title", t_strMethodName );
  customDialog_54.SetCustomDialogProperty( "textInput1.Text", l_strCalibrationWeightNumber );
  customDialog_54.SetCustomDialogProperty( "numeric1.Value", l_fltTemperature );
  customDialog_54.ShowCustomDialog();
  l_strCalibrationWeightNumber = customDialog_54.GetCustomDialogProperty( "textInput1.Text" );
  l_fltTemperature = customDialog_54.GetCustomDialogProperty( "numeric1.Value" );
  {
       variable a(-0.0000000001);
       variable b(0.00000004);
       variable c(-0.000008);
       variable d(0.00005);
       variable e(t_fltWaterDensityStart);
       variable t1(l_fltTemperature);
       variable t2(l_fltTemperature);
       variable t3(l_fltTemperature);
       variable t4(l_fltTemperature);
       t2 = t2^2;
       t3 = t3^3;
       t4 = t4^4;
       Trace("T1 = ",t1);
       Trace("T2 = ",t2);
       Trace("T3 = ",t3);
       Trace("T4 = ",t4);
       t_fltWaterDensity = a*t4 + b*t3 + c*t2 + d*t1 + e;
       Trace("Calculated Density:  ",t_fltWaterDensity);
  }
  customDialog_52.InitCustomDialog("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");
  customDialog_52.SetCustomDialogProperty( "Title", t_strMethodName );
  customDialog_52.ShowCustomDialog();
  retValueDialog = customDialog_52.GetCustomDialogProperty( "ReturnValue" );
  if (t_blnSimulaitonMode == ASWGLOBAL::BOOL::FALSE)
  {
    l_blnReturnValue = METTLER_WXS::InternalCalibration();
    if (l_blnReturnValue == ASWGLOBAL::BOOL::FALSE)
    {
      METTLER_WXS::Terminate();
      ErrSetDescription(Translate("Could not Reset balance!"));
      Dialog_ErrorMessageGeneric(Translate("Reset the balance"));
      _UpdateResultsCV(ASWGLOBAL::BOOL::FALSE, 0.0, 0.0);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
      return;
    }
  }
  if (t_blnSimulaitonMode == ASWGLOBAL::BOOL::FALSE)
  {
    l_blnReturnValue = METTLER_WXS::SetZero(ASWGLOBAL::BOOL::FALSE);
    if (l_blnReturnValue == ASWGLOBAL::BOOL::FALSE)
    {
      METTLER_WXS::Terminate();
      ErrSetDescription(Translate("Could not Zero Balance"));
      Dialog_ErrorMessageGeneric(Translate("Reset the balance"));
      _UpdateResultsCV(ASWGLOBAL::BOOL::FALSE, 0.0, 0.0);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
      return;
    }
  }
  customDialog_53.InitCustomDialog("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");
  customDialog_53.SetCustomDialogProperty( "Title", t_strMethodName );
  customDialog_53.ShowCustomDialog();
  retValueDialog = customDialog_53.GetCustomDialogProperty( "ReturnValue" );
  if (t_blnSimulaitonMode == ASWGLOBAL::BOOL::FALSE)
  {
    l_blnReturnValue = METTLER_WXS::GetWeight(ASWGLOBAL::BOOL::FALSE, l_fltCalibrationWeight, l_blnStability, l_strMeasuredWeight, l_strMeasuredUnit);
    if (l_blnReturnValue == ASWGLOBAL::BOOL::FALSE)
    {
      METTLER_WXS::Terminate();
      ErrSetDescription(Translate("Issue measuring full weight!"));
      Dialog_ErrorMessageGeneric(Translate("Get Weight"));
      _UpdateResultsCV(ASWGLOBAL::BOOL::FALSE, 0.0, 0.0);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
      return;
    }
  }
  else
  {
    l_fltCalibrationWeight = 20.0;
  }
  l_fltMaxWeight = 20.00034;
  l_fltMinWeight = 19.99966;
  if (l_fltCalibrationWeight > l_fltMaxWeight)
  {
    METTLER_WXS::Terminate();
    ErrSetDescription(Translate("Calibration weight is out of spec:  Too High!"));
    Dialog_ErrorMessageGeneric(Translate("Measure Calibration Weight"));
    _UpdateResultsCV(ASWGLOBAL::BOOL::FALSE, 0.0, 0.0);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    return;
  }
  if (l_fltCalibrationWeight < l_fltMinWeight)
  {
    METTLER_WXS::Terminate();
    ErrSetDescription(Translate("Calibration weight is out of spec:  Too Low!"));
    Dialog_ErrorMessageGeneric(Translate("Measure Calibration Weight"));
    _UpdateResultsCV(ASWGLOBAL::BOOL::FALSE, 0.0, 0.0);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    return;
  }
  if (t_blnDispenserPrimed == ASWGLOBAL::BOOL::FALSE)
  {
    customDialog_37.InitCustomDialog("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");
    customDialog_37.SetCustomDialogProperty( "Title", t_strMethodName );
    customDialog_37.ShowCustomDialog();
    retValueDialog = customDialog_37.GetCustomDialogProperty( "ReturnValue" );
    l_intReturnValue = HSLMPELib::Prime(t_intDeviceID, 1, 50000.0, 900.0, l_intWasteContainer);
    if (l_intReturnValue > 0)
    {
      _UpdateResultsCV(ASWGLOBAL::BOOL::FALSE, 0.0, 0.0);
      Dialog_ErrorMessage(Translate("Error Reagent Test CV - Prime"));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
      return;
    }
    t_blnDispenserPrimed = ASWGLOBAL::BOOL::TRUE;
  }
  if (l_intCountNeedles == 8)
  {
    customDialog_39.InitCustomDialog("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");
    customDialog_39.SetCustomDialogProperty( "Title", t_strMethodName );
    customDialog_39.ShowCustomDialog();
    retValueDialog = customDialog_39.GetCustomDialogProperty( "ReturnValue" );
  }
  else
  {
    customDialog_40.InitCustomDialog("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");
    customDialog_40.SetCustomDialogProperty( "Title", t_strMethodName );
    customDialog_40.ShowCustomDialog();
    retValueDialog = customDialog_40.GetCustomDialogProperty( "ReturnValue" );
  }
  HSLMPELib::FilterPlatePlaced(t_intDeviceID, 41.0, 41.0);
  l_arrWellPattern.SetSize(1);
  if (l_intCountNeedles == 8)
  {
    l_intReturnValue = HSLMPELib::CustomDispense(t_intDeviceID, 1, l_fltDispenseVolume, 3000, 325, -3, 12, l_arrWellPattern, 0, 0);
  }
  else
  {
    l_intReturnValue = HSLMPELib::CustomDispense(t_intDeviceID, 1, l_fltDispenseVolume, 3000, 325, -3, 17, l_arrWellPattern, 0, 0);
  }
  if (l_intReturnValue > 0)
  {
    if (t_blnSimulaitonMode == ASWGLOBAL::BOOL::FALSE)
    {
      METTLER_WXS::Terminate();
    }
    _UpdateResultsCV(ASWGLOBAL::BOOL::FALSE, 0.0, 0.0);
    Dialog_ErrorMessage(Translate("Error Reagent Test CV - Dispense"));
    HSLMPELib::FilterPlateRemoved(t_intDeviceID);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    return;
  }
  HSLMPELib::FilterPlateRemoved(t_intDeviceID);
  customDialog_41.InitCustomDialog("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");
  customDialog_41.SetCustomDialogProperty( "Title", t_strMethodName );
  customDialog_41.ShowCustomDialog();
  retValueDialog = customDialog_41.GetCustomDialogProperty( "ReturnValue" );
  l_blnResult = customDialog_41.GetCustomDialogProperty( "radioButton1.IsChecked" );
  if (l_blnResult == ASWGLOBAL::BOOL::FALSE)
  {
    if (t_blnSimulaitonMode == ASWGLOBAL::BOOL::FALSE)
    {
      METTLER_WXS::Terminate();
    }
    _UpdateResultsCV(ASWGLOBAL::BOOL::FALSE, 0.0, 0.0);
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    return;
  }
  customDialog_44.InitCustomDialog("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");
  customDialog_44.SetCustomDialogProperty( "Title", t_strMethodName );
  customDialog_44.ShowCustomDialog();
  retValueDialog = customDialog_44.GetCustomDialogProperty( "ReturnValue" );
  if (t_blnSimulaitonMode == ASWGLOBAL::BOOL::FALSE)
  {
    l_blnReturnValue = METTLER_WXS::SetZero(ASWGLOBAL::BOOL::FALSE);
    if (l_blnReturnValue == ASWGLOBAL::BOOL::FALSE)
    {
      METTLER_WXS::Terminate();
      ErrSetDescription(Translate("Could not Zero Balance"));
      Dialog_ErrorMessageGeneric(Translate("Reset the balance"));
      _UpdateResultsCV(ASWGLOBAL::BOOL::FALSE, 0.0, 0.0);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
      return;
    }
  }
  l_blnFileExists = HSLExtensions::File::Exists(t_strMeasuredWeightFilePath);
  if (l_blnFileExists == ASWGLOBAL::BOOL::TRUE)
  {
    HSLExtensions::File::Delete(t_strMeasuredWeightFilePath);
  }
  if (l_intCountNeedles == 8)
  {
    customDialog_46.InitCustomDialog("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");
    customDialog_46.SetCustomDialogProperty( "Title", t_strMethodName );
    customDialog_46.ShowCustomDialog();
    retValueDialog = customDialog_46.GetCustomDialogProperty( "ReturnValue" );
  }
  else
  {
    customDialog_49.InitCustomDialog("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");
    customDialog_49.SetCustomDialogProperty( "Title", t_strMethodName );
    customDialog_49.ShowCustomDialog();
    retValueDialog = customDialog_49.GetCustomDialogProperty( "ReturnValue" );
  }
  if (t_blnSimulaitonMode == ASWGLOBAL::BOOL::FALSE)
  {
    l_blnReturnValue = METTLER_WXS::GetWeight(ASWGLOBAL::BOOL::FALSE, l_fltFullWeight, l_blnStability, l_strMeasuredWeight, l_strMeasuredUnit);
    if (l_blnReturnValue == ASWGLOBAL::BOOL::FALSE)
    {
      METTLER_WXS::Terminate();
      ErrSetDescription(Translate("Issue measuring full weight!"));
      Dialog_ErrorMessageGeneric(Translate("Get Weight"));
      _UpdateResultsCV(ASWGLOBAL::BOOL::FALSE, 0.0, 0.0);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
      return;
    }
  }
  else
  {
    l_fltFullWeight = 177.747;
  }
  TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Full Weight:  "), l_fltFullWeight, Translate(" (g)"));
  l_hdlWriteFile.AddField("NeedleNumber", l_intNeedleIndex, hslInteger);
  l_hdlWriteFile.AddField("RawWeight", l_fltTubeWeight, hslFloat);
  l_hdlWriteFile.AddField("LiquidWeight", l_fltLiquidWeight, hslFloat);
  l_hdlWriteFile.AddField("VolumeDispensed", l_fltVolumeDispensed, hslFloat);
  l_hdlWriteFile.SetDelimiter(hslCSVDelimited);
  if( 0 == l_hdlWriteFile.Open(t_strMeasuredWeightFilePath, hslAppend) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strMeasuredWeightFilePath, "HxMetEdCompCmd");
  }
  l_arrResults.SetSize(0);
  {
    for(l_intNeedleIndex = 0; l_intNeedleIndex < l_intCountNeedles;)
    {
      l_intNeedleIndex = l_intNeedleIndex + 1;
      l_strWell=l_arrWellIDs.GetAt(l_intNeedleIndex-1);
      l_strTubeRemoval = StrConcat4(Translate("Remove tube from well "), l_strWell, Translate(" and press Measure to weigh the remaining tubes."), Translate(""));
      customDialog_48.InitCustomDialog("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");
      customDialog_48.SetCustomDialogProperty( "Title", t_strMethodName );
      customDialog_48.SetCustomDialogProperty( "textBlock2.Text", l_strTubeRemoval );
      customDialog_48.ShowCustomDialog();
      retValueDialog = customDialog_48.GetCustomDialogProperty( "ReturnValue" );
      if (t_blnSimulaitonMode == ASWGLOBAL::BOOL::FALSE)
      {
        l_blnReturnValue = METTLER_WXS::GetWeight(ASWGLOBAL::BOOL::FALSE, l_fltCurrentWeight, l_blnStability, l_strMeasuredWeight, l_strMeasuredUnit);
        if (l_blnReturnValue == ASWGLOBAL::BOOL::FALSE)
        {
          METTLER_WXS::Terminate();
          ErrSetDescription(Translate("Issue measuring full weight!"));
          Dialog_ErrorMessageGeneric(Translate("Get Weight"));
          _UpdateResults(t_strKeyReagentCVResult, t_strKeyReagentCVDate, ASWGLOBAL::BOOL::FALSE);
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
          TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
          return;
        }
        l_fltTubeWeight = l_fltFullWeight - l_fltCurrentWeight;
        l_fltFullWeight = l_fltCurrentWeight;
      }
      else
      {
        l_fltTubeWeight = 1.183;
        l_fltIncreaseAmount = 0.0005 * l_intNeedleIndex;
        l_fltTubeWeight = l_fltTubeWeight - l_fltIncreaseAmount;
      }
      l_fltLiquidWeight = l_fltTubeWeight - t_fltAverageTubeWeight;
      l_fltVolumeDispensed = l_fltLiquidWeight / (t_fltWaterDensity * 1.0);
      TRACELEVEL::Trace_06(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Needle Number:  "), l_intNeedleIndex, Translate("  -  "), Translate("Dispensed Volume:  "), l_fltVolumeDispensed);
      if( 0 == l_hdlWriteFile.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      l_arrResults.AddAsLast(l_fltVolumeDispensed);
    }
  }
  if( 0 != l_hdlWriteFile.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  l_hdlWriteFile.RemoveFields();
  if (t_blnSimulaitonMode == ASWGLOBAL::BOOL::FALSE)
  {
    METTLER_WXS::Terminate();
  }
  HSLExtensions::File::Copy(t_strCVTestReportTemplateFile, l_strReportFile, ASWGLOBAL::BOOL::TRUE);
  ExcelEdit::OpenFile(l_strReportFile, Translate("Report"));
  ExcelEdit::UpdateCell(8, 4, l_strReportDate, ExcelEdit::CELL_TYPE::STRING);
  ExcelEdit::UpdateCell(8, 5, l_strReportTime, ExcelEdit::CELL_TYPE::STRING);
  ExcelEdit::UpdateCell(4, 5, t_strSerialNumber, ExcelEdit::CELL_TYPE::STRING);
  ExcelEdit::UpdateCell(4, 6, t_strPhoenixVersion, ExcelEdit::CELL_TYPE::STRING);
  ExcelEdit::UpdateCell(4, 7, l_fltTemperature, ExcelEdit::CELL_TYPE::FLOAT);
  ExcelEdit::UpdateCell(4, 12, l_strBalanceSerialNumber, ExcelEdit::CELL_TYPE::STRING);
  ExcelEdit::UpdateCell(4, 13, l_strCalibrationWeightNumber, ExcelEdit::CELL_TYPE::STRING);
  ExcelEdit::UpdateCell(4, 14, l_fltCalibrationWeight, ExcelEdit::CELL_TYPE::FLOAT);
  ExcelEdit::UpdateCell(4, 20, l_intCountNeedles, ExcelEdit::CELL_TYPE::INTEGER);
  ExcelEdit::UpdateCell(4, 22, t_fltWaterDensity, ExcelEdit::CELL_TYPE::FLOAT);
  l_hdlReadFile.AddField("NeedleNumber", l_intNeedleIndex, hslInteger);
  l_hdlReadFile.AddField("RawWeight", l_fltTubeWeight, hslFloat);
  l_hdlReadFile.AddField("LiquidWeight", l_fltLiquidWeight, hslFloat);
  l_hdlReadFile.AddField("VolumeDispensed", l_fltVolumeDispensed, hslFloat);
  l_hdlReadFile.SetDelimiter(hslCSVDelimited);
  if( 0 == l_hdlReadFile.Open(t_strMeasuredWeightFilePath, hslRead, "SELECT * FROM [WeightMeasured#csv] ORDER BY [VolumeDispensed] ASC") )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strMeasuredWeightFilePath, "HxMetEdCompCmd");
  }
  l_arrResults.SetSize(0);
  l_intHalfNeedles = l_intCountNeedles / 2;
  l_intRowIndex = 37;
  {
    l_intValueNumber = 0;
    while (
       (l_hdlReadFile.Eof() == 0)
    )
    {
      l_intValueNumber = l_intValueNumber + 1;
      if( 0 == l_hdlReadFile.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if (l_intValueNumber <= l_intHalfNeedles)
      {
        l_fltLiquidWeight = l_fltLiquidWeight - t_fltTubeWeightTolerance;
      }
      else
      {
        l_fltLiquidWeight = l_fltLiquidWeight + t_fltTubeWeightTolerance;
      }
      l_fltVolumeDispensed = l_fltLiquidWeight / (t_fltWaterDensity * 1.0);
      l_arrResults.AddAsLast(l_fltVolumeDispensed);
      l_fltVolumeDispensed = l_fltVolumeDispensed * 1000.0;
      l_fltVolumeDispensed = MthRound(l_fltVolumeDispensed, 1);
      l_intRow = l_intRowIndex + l_intNeedleIndex;
      ExcelEdit::UpdateCell(4, l_intRow, l_fltVolumeDispensed, ExcelEdit::CELL_TYPE::FLOAT);
    }
  }
  Util2::Debug::TraceArray(Translate("Sorted Results"), l_arrResults);
  if( 0 != l_hdlReadFile.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  l_hdlReadFile.RemoveFields();
  l_fltStDev = HSLStatisitics::Stat_StdDeviation(l_arrResults);
  l_fltAvg = HSLStatisitics::Stat_Average(l_arrResults);
  l_fltCV = l_fltStDev / (l_fltAvg * 1.0);
  l_fltCV = l_fltCV * 100.0;
  TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Average:  "), l_fltAvg, Translate(""));
  TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("StDev:  "), l_fltStDev, Translate(""));
  TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Max CV:  "), l_fltCV, Translate(" %"));
  if (l_fltCV <= 4)
  {
    l_blnPass = ASWGLOBAL::BOOL::TRUE;
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("CV Pass!"), Translate(""), Translate(""));
    ExcelEdit::UpdateCell(4, 30, Translate("Pass"), ExcelEdit::CELL_TYPE::STRING);
    ExcelEdit::UpdateCell(4, 33, Translate("Pass"), ExcelEdit::CELL_TYPE::STRING);
    ExcelEdit::UpdateCell(4, 51, Translate("Pass"), ExcelEdit::CELL_TYPE::STRING);
  }
  else
  {
    l_blnPass = ASWGLOBAL::BOOL::FALSE;
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("CV Fail!"), Translate(""), Translate(""));
    ExcelEdit::UpdateCell(4, 30, Translate("Fail"), ExcelEdit::CELL_TYPE::STRING);
    ExcelEdit::UpdateCell(4, 33, Translate("Fail"), ExcelEdit::CELL_TYPE::STRING);
    ExcelEdit::UpdateCell(4, 51, Translate("Fail"), ExcelEdit::CELL_TYPE::STRING);
  }
  _UpdateResultsCV(l_blnPass, l_fltCV, l_fltAvg);
  l_fltAvg = l_fltAvg * 1000;
  l_fltAvg = MthRound(l_fltAvg, 1);
  l_fltStDev = l_fltStDev * 1000;
  l_fltStDev = MthRound(l_fltStDev, 1);
  l_fltCV = MthRound(l_fltCV, 3);
  ExcelEdit::UpdateCell(4, 24, l_fltAvg, ExcelEdit::CELL_TYPE::FLOAT);
  ExcelEdit::UpdateCell(4, 47, l_fltAvg, ExcelEdit::CELL_TYPE::FLOAT);
  ExcelEdit::UpdateCell(4, 25, l_fltStDev, ExcelEdit::CELL_TYPE::FLOAT);
  ExcelEdit::UpdateCell(4, 48, l_fltStDev, ExcelEdit::CELL_TYPE::FLOAT);
  ExcelEdit::UpdateCell(4, 28, l_fltCV, ExcelEdit::CELL_TYPE::FLOAT);
  ExcelEdit::UpdateCell(4, 49, l_fltCV, ExcelEdit::CELL_TYPE::FLOAT);
  ExcelEdit::CloseFile();
  customDialog_50.InitCustomDialog("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");
  customDialog_50.SetCustomDialogProperty( "Title", t_strMethodName );
  customDialog_50.ShowCustomDialog();
  retValueDialog = customDialog_50.GetCustomDialogProperty( "ReturnValue" );
  l_intReturnValue = HSLMPELib::Prime(t_intDeviceID, 1, 30000.0, 1000.0, l_intWasteContainer);
  MECC::TraceComment(Translate(""));
  TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate("     "), Translate("Output Report:  \""), l_strReportFile, Translate("\""));
  if (l_intReturnValue > 0)
  {
    Dialog_ErrorMessage(Translate("Error Reagent Test - Drain"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
    TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
    return;
  }
  t_blnDispenserPrimed = ASWGLOBAL::BOOL::FALSE;
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(""), Translate(""));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, l_strFunctionName, Translate(" - FINISH"));
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate("==========================================================================="), Translate(""));
}

private function Dialog_ErrorMessageGeneric( variable i_strProcessDescription ) void {
  private dialog customDialog_55;
  private variable l_strErrorName;
  private variable l_strMessage;
  private variable l_intTotalErrors;
  private variable l_strErrorDescription;
  private variable l_intErrorNumber;
  private variable l_strFullError;
  private variable l_blnValueFound;
  private variable l_arrErrorsFound[];
  l_strMessage = ErrGetDescription();
  customDialog_55.InitCustomDialog("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");
  customDialog_55.SetCustomDialogProperty( "Title", t_strMethodName );
  customDialog_55.SetCustomDialogProperty( "textBlock1.Text", i_strProcessDescription );
  customDialog_55.SetCustomDialogProperty( "textBlock2.Text", l_strMessage );
  customDialog_55.ShowCustomDialog();
}

private function _UpdateResultsCV( variable i_blnResult, variable i_fltCV, variable i_fltAVG ) void {
  private variable l_strDataDefinition;
  private variable l_strTime;
  private variable l_strResultTime;
  private variable l_strDate;
  l_strDataDefinition = StrConcat4(t_strDataDefinition, t_strMPESelected, Translate(""), Translate(""));
  l_strDate = TimGetFormattedDate(Translate("%m/%d/%Y"));
  l_strTime = TimGetFormattedTime(Translate("%H:%M"));
  l_strResultTime = StrConcat4(l_strDate, Translate(" "), l_strTime, Translate(""));
  CONFIGHELPER::CREATE_AddNewValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceResults, t_strKeyReagentCVResult, 3, i_blnResult);
  CONFIGHELPER::CREATE_AddNewValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceResults, t_strKeyReagentCVDate, 0, l_strResultTime);
  CONFIGHELPER::CREATE_AddNewValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceResults, t_strKeyReagentCVAVG, 2, i_fltAVG);
  CONFIGHELPER::CREATE_AddNewValue(t_strConfigFilePath, l_strDataDefinition, t_strInstanceResults, t_strKeyReagentCVCV, 2, i_fltCV);
}
