 namespace _Method { #include "HSLMPELib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
variable ret_DialogValue;
dialog customDialog_1;
dialog customDialog_2;
dialog customDialog_3;
variable ret_IsInitialized;
dialog customDialog_4;
dialog customDialog_5;
timer timer_Elution;
dialog customDialog_6;
dialog customDialog_7;
dialog customDialog_8;
dialog customDialog_9;
dialog customDialog_10;
dialog customDialog_11;
dialog customDialog_12;
dialog customDialog_13;
dialog customDialog_14;
dialog customDialog_15;
dialog customDialog_16;
dialog customDialog_17;
dialog customDialog_18;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  Macherey Nagel NucleoSpin 96 Plasmid on [MPE]² Unit\nBy:         Christian Wolff, Macherey-Nagel GmbH & Co. KG, Düren, Germany\nDate:     May 08, 2018\noriginal Version:  1.2\n\nBased on NucleoSpin 96 Plasmid User Manual, Macherey Nagel, November 2016, Rev. 04\n\nVersion Notes:\nFiltration directly to binding plate with MN Adaptor to center the black MPE2 adaptor\nLower Filtration Stack from bottom to top. MN Wash plate, NucleoSpin 96 Plasmid binding plate, MN Adaptor\n\n*************************************************************************************************************************************"));
    HSLMPELib::ConnectUsingCOM(7, 921600, 0, 1);
    HSLMPELib::Initialize(1);
    if(0){
      HSLMPELib::IsConnected(1, 2);
      HSLMPELib::IsInitialized(1, ret_IsInitialized);
      if (ret_IsInitialized == 0)
      {
        HSLMPELib::Initialize(1);
      }
    }
    customDialog_3.InitCustomDialog("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");
    customDialog_3.ShowCustomDialog();
    ret_DialogValue = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
    if (ret_DialogValue == 2)
    {
      HSLMPELib::StopVacuum(1);
      HSLMPELib::Disconnect(1);
      abort;
    }
    HSLMPELib::FilterPlatePlaced(1, 15.1, 18.3);
    HSLMPELib::ClampFilterPlate(1);
    customDialog_10.InitCustomDialog("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");
    customDialog_10.ShowCustomDialog();
    ret_DialogValue = customDialog_10.GetCustomDialogProperty( "ReturnValue" );
    if (ret_DialogValue == 2)
    {
      HSLMPELib::StopVacuum(1);
      HSLMPELib::Disconnect(1);
      abort;
    }
    HSLMPELib::CollectionPlatePlaced(1, 60, 0);
    HSLMPELib::RetrieveFilterPlate(1);
    customDialog_6.InitCustomDialog("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");
    customDialog_6.ShowCustomDialog();
    ret_DialogValue = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
    if (ret_DialogValue == 2)
    {
      HSLMPELib::StopVacuum(1);
      HSLMPELib::Disconnect(1);
      abort;
    }
    HSLMPELib::ProcessFilterToCollectionPlate(1, Translate("pressure,10,180; pressure,20,60; pressure,30,60; pressure,40,60;"), 0);
    if(0){
      HSLMPELib::ProcessFilterToCollectionPlate(1, Translate("pressure,1,60;pressure,1.5,180;"), 0);
    }
    customDialog_9.InitCustomDialog("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");
    customDialog_9.ShowCustomDialog();
    ret_DialogValue = customDialog_9.GetCustomDialogProperty( "ReturnValue" );
    if (ret_DialogValue == 2)
    {
      HSLMPELib::StopVacuum(1);
      HSLMPELib::Disconnect(1);
      abort;
    }
    HSLMPELib::CollectionPlateRemoved(1);
    HSLMPELib::RetrieveFilterPlate(1);
    customDialog_8.InitCustomDialog("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");
    customDialog_8.ShowCustomDialog();
    ret_DialogValue = customDialog_8.GetCustomDialogProperty( "ReturnValue" );
    if (ret_DialogValue == 2)
    {
      HSLMPELib::StopVacuum(1);
      HSLMPELib::Disconnect(1);
      abort;
    }
    HSLMPELib::FilterPlateRemoved(1);
    customDialog_13.InitCustomDialog("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");
    customDialog_13.ShowCustomDialog();
    ret_DialogValue = customDialog_13.GetCustomDialogProperty( "ReturnValue" );
    if (ret_DialogValue == 2)
    {
      HSLMPELib::StopVacuum(1);
      HSLMPELib::Disconnect(1);
      abort;
    }
    HSLMPELib::FilterPlatePlaced(1, 15.2, 37.8);
    HSLMPELib::ClampFilterPlate(1);
    customDialog_17.InitCustomDialog("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");
    customDialog_17.ShowCustomDialog();
    ret_DialogValue = customDialog_17.GetCustomDialogProperty( "ReturnValue" );
    if (ret_DialogValue == 2)
    {
      HSLMPELib::StopVacuum(1);
      HSLMPELib::Disconnect(1);
      abort;
    }
    HSLMPELib::CollectionPlatePlaced(1, 9, 0);
    HSLMPELib::StartVacuum(1, 0, 10, 0);
    HSLMPELib::ProcessFilterToCollectionPlate(1, Translate("pressure,40,60;"), 1);
    if(0){
      HSLMPELib::ProcessFilterToCollectionPlate(1, Translate("pressure,1,60;pressure,2,60;pressure,3,60;pressure,5,5;"), 1);
    }
    HSLMPELib::StopVacuum(1);
    MECC::TraceComment(Translate("================== 1st Wash 600 µL AW (optional) =================="));
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    ret_DialogValue = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
    if (ret_DialogValue == 2)
    {
      HSLMPELib::StopVacuum(1);
      HSLMPELib::FilterPlateRemoved(1);
      HSLMPELib::Disconnect(1);
      abort;
    }
    HSLMPELib::StartVacuum(1, 0, 10, 0);
    HSLMPELib::ProcessFilterToCollectionPlate(1, Translate("pressure,40,60;"), 1);
    if(0){
      HSLMPELib::ProcessFilterToCollectionPlate(1, Translate("pressure,3,30;pressure,5,30;pressure,7,30;"), 1);
    }
    HSLMPELib::StopVacuum(1);
    MECC::TraceComment(Translate("================== 2nd Wash 900 µL A4 =================="));
    customDialog_12.InitCustomDialog("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");
    customDialog_12.ShowCustomDialog();
    ret_DialogValue = customDialog_12.GetCustomDialogProperty( "ReturnValue" );
    if (ret_DialogValue == 2)
    {
      HSLMPELib::StopVacuum(1);
      HSLMPELib::FilterPlateRemoved(1);
      HSLMPELib::Disconnect(1);
      abort;
    }
    HSLMPELib::StartVacuum(1, 0, 10, 0);
    HSLMPELib::ProcessFilterToCollectionPlate(1, Translate("pressure,40,60;"), 1);
    if(0){
      HSLMPELib::ProcessFilterToCollectionPlate(1, Translate("pressure,3,30;pressure,5,30;pressure,7,30;"), 1);
    }
    HSLMPELib::StopVacuum(1);
    MECC::TraceComment(Translate("=================== 3rd Wash 900 uL B5  ========================\n\nNucleoSpin 96 Plasmid Binding Plate remains clamped for the MN Wash Plate removal"));
    customDialog_11.InitCustomDialog("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");
    customDialog_11.ShowCustomDialog();
    ret_DialogValue = customDialog_11.GetCustomDialogProperty( "ReturnValue" );
    if (ret_DialogValue == 2)
    {
      HSLMPELib::StopVacuum(1);
      HSLMPELib::FilterPlateRemoved(1);
      HSLMPELib::Disconnect(1);
      abort;
    }
    HSLMPELib::StartVacuum(1, 0, 10, 0);
    HSLMPELib::ProcessFilterToCollectionPlate(1, Translate("pressure,40,60;"), 0);
    if(0){
      HSLMPELib::ProcessFilterToCollectionPlate(1, Translate("pressure,3,30;pressure,5,30;pressure,7,30;"), 0);
    }
    HSLMPELib::StopVacuum(1);
    MECC::TraceComment(Translate("=================== Remove MN Wash Plate ========================"));
    customDialog_7.InitCustomDialog("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");
    customDialog_7.ShowCustomDialog();
    ret_DialogValue = customDialog_7.GetCustomDialogProperty( "ReturnValue" );
    if (ret_DialogValue == 2)
    {
      HSLMPELib::StopVacuum(1);
      HSLMPELib::Disconnect(1);
      abort;
    }
    HSLMPELib::CollectionPlateRemoved(1);
    MECC::TraceComment(Translate("=================== Dry silica membrane ========================\n\nNucleoSpin 96 Plasmid Binding Plate remains clamped for the placement of a new collection plate"));
    HSLMPELib::ProcessFilterToWasteContainer(1, Translate("pressure,65,420;"), 0, 0, 0);
    if(0){
      HSLMPELib::ProcessFilterToWasteContainer(1, Translate("pressure,5,10;pressure,6,10;pressure,7,10;pressure,8,10;pressure,9,10;pressure,10,20;pressure,11,20;pressure,12,20;pressure,13,20;pressure,14,20;pressure,15,600;"), 0, 0, 0);
    }
    if(0){
      customDialog_18.InitCustomDialog("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");
      customDialog_18.ShowCustomDialog();
      ret_DialogValue = customDialog_18.GetCustomDialogProperty( "ReturnValue" );
      if (ret_DialogValue == 2)
      {
        HSLMPELib::StopVacuum(1);
        HSLMPELib::Disconnect(1);
        abort;
      }
      HSLMPELib::FilterPlatePlaced(1, 15.2, 37.8);
      HSLMPELib::ClampFilterPlate(1);
    }
    customDialog_5.InitCustomDialog("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");
    customDialog_5.ShowCustomDialog();
    ret_DialogValue = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
    if (ret_DialogValue == 2)
    {
      HSLMPELib::RetrieveFilterPlate(1);
      HSLMPELib::FilterPlateRemoved(1);
      HSLMPELib::Disconnect(1);
      abort;
    }
    HSLMPELib::CollectionPlatePlaced(1, 14.2, -1.5);
    HSLMPELib::RetrieveFilterPlate(1);
    customDialog_14.InitCustomDialog("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");
    customDialog_14.ShowCustomDialog();
    ret_DialogValue = customDialog_14.GetCustomDialogProperty( "ReturnValue" );
    if (ret_DialogValue == 2)
    {
      HSLMPELib::ClampFilterPlate(1);
      customDialog_4.InitCustomDialog("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");
      customDialog_4.ShowCustomDialog();
      ret_DialogValue = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
      HSLMPELib::CollectionPlateRemoved(1);
      HSLMPELib::RetrieveFilterPlate(1);
      HSLMPELib::FilterPlateRemoved(1);
      HSLMPELib::Disconnect(1);
      abort;
    }
    if( 0 == timer_Elution.SetTimer(300) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if(0){
      if( 0 == timer_Elution.SetTimer(60) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    if( 0 == timer_Elution.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if(0){
      HSLMPELib::ProcessFilterToCollectionPlate(1, Translate("pressure,65,300;"), 0);
      HSLMPELib::ProcessFilterToCollectionPlate(1, Translate("pressure,6,60;pressure,7,30;"), 1);
      customDialog_15.InitCustomDialog("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");
      customDialog_15.ShowCustomDialog();
      ret_DialogValue = customDialog_15.GetCustomDialogProperty( "ReturnValue" );
      if (ret_DialogValue == 2)
      {
        HSLMPELib::ClampFilterPlate(1);
        customDialog_16.InitCustomDialog("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");
        customDialog_16.ShowCustomDialog();
        ret_DialogValue = customDialog_16.GetCustomDialogProperty( "ReturnValue" );
        HSLMPELib::CollectionPlateRemoved(1);
        HSLMPELib::RetrieveFilterPlate(1);
        HSLMPELib::FilterPlateRemoved(1);
        HSLMPELib::Disconnect(1);
        abort;
      }
      if( 0 == timer_Elution.SetTimer(60) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == timer_Elution.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      HSLMPELib::ProcessFilterToCollectionPlate(1, Translate("pressure,6,60;pressure,7,30;pressure,8,30;pressure,9,30;pressure,10,30;"), 0);
    }
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    ret_DialogValue = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    HSLMPELib::CollectionPlateRemoved(1);
    HSLMPELib::RetrieveFilterPlate(1);
    HSLMPELib::FilterPlateRemoved(1);
    HSLMPELib::Disconnect(1);
  } }
