#pragma once
#include "HSLUtilLib.hsl"
#include "HslHamHeaterShakerLib.hsl"
#include "HSLInhecoTEC\\HSLInhecoTECLib.hsl"
#include "Inheco ODTC\\InhecoODTCController.hs_"
#include "HSLStrLib.hsl"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl"
#include "Inheco ODTC\\Inheco ODTC.hsl"
#include "HSLExtensions\\File.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace NIST_DEVICE_CONTROLLERS {
  function CheckCPACTemperature( variable i_int_DeviceID, variable i_flt_ExpectedTemp ) void ;
  function CheckHHSTemperature( variable i_int_HHS_DeviceID, variable i_flt_ExpectedTemp, variable i_flt_TempTolerance ) void ;
  function DoorControlODTC( variable i_int_DeviceID, variable bool_OpenDoor ) variable ;
  function GetHHSShakingSpeed( variable i_int_HHS_DeviceID ) void ;
  function GetHHSTemperature( variable i_int_HHS_DeviceID ) void ;
  function InitCPAC(  ) void ;
  function InitHHS( device & ML_STAR, variable i_bool_ConnectUSB, variable & o_int_HHS_DeviceID ) void ;
  function InitODTC( variable i_str_ODTC_IPAddress, variable & o_int_DeviceID ) variable ;
  private function ReportErrorTextCPAC( variable var_ErrorCPAC ) void ;
  function RunScriptODTC( variable i_int_DeviceID, variable i_str_ScriptPath ) variable ;
  function SetCPACTemperature( variable i_int_CPAC_Number, variable i_flt_CPAC_Temp ) void ;
  function Shake( variable i_int_HHS_DeviceID, variable i_int_Speed, variable i_int_ShakingDuration ) void ;
  function StartScriptODTC( variable i_int_DeviceID, variable i_str_ScriptPath, variable & o_int_ScriptTime, variable & o_int_RunID ) variable ;
  function TerminateCPAC(  ) void ;
  function TerminateHHSs(  ) void ;
  function TerminateODTC( variable i_int_DeviceID ) void ;
  function WaitForScriptODTC( variable i_int_DeviceID, variable i_int_ScriptTime, variable i_int_RunID ) variable ;
  private function _Delay( variable i_intSeconds ) void ;
  private function _GetHHSError( variable i_int_ErrorID, variable & o_str_ErrorDescription ) void ;
  private function _HandleReturnValue( variable i_blnSuccess, variable i_strFunctionName, variable i_intReturnValue, variable i_strMessage ) void ;
  private function _HandleReturnValue_ODTC( variable i_blnSuccess, variable i_intDeviceNumber, variable i_strFunctionName, variable i_strMessage ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    INHECOODTCCONTROLLER::_InitLibrary();
  }
  function _ExitLibrary() {
    INHECOODTCCONTROLLER::_ExitLibrary();
  }

  function InitHHS( device & ML_STAR, variable i_bool_ConnectUSB, variable & o_int_HHS_DeviceID ) void {
    private variable bool_SimulationMode;
    private variable str_ErrorDescription;
    private variable ret_HHS;
    private dialog dialogHandle1;
    o_int_HHS_DeviceID = 0;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  InitHHS <<<<<<<<<<"));
    bool_SimulationMode = Util::GetSimulationMode();
    o_int_HHS_DeviceID = 0;
    HSLHamHeaterShaker::SetSimulation(bool_SimulationMode);
    if (i_bool_ConnectUSB == ASWGLOBAL::BOOL::TRUE)
    {
      ret_HHS = HSLHamHeaterShaker::CreateUsbDevice(1, o_int_HHS_DeviceID);
    }
    else
    {
      ret_HHS = HSLHamHeaterShaker::CreateStarDevice(ML_STAR, 1, o_int_HHS_DeviceID);
    }
    if (ret_HHS > 0)
    {
      _GetHHSError(ret_HHS, str_ErrorDescription);
      Trace("Error Initializing HHS:  ",str_ErrorDescription);
      dialogHandle1.SetOutput(Translate("There is a problem with the Hamilton Heater Shaker."), Translate("\n\n"), Translate("A description of the error can be found below:  "), Translate("\n\n"), str_ErrorDescription);
      dialogHandle1.ShowOutput(Translate("Problem with the HHS"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
      abort;
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  InitHHS <<<<<<<<<<"));
  }

  private function _GetHHSError( variable i_int_ErrorID, variable & o_str_ErrorDescription ) void {
    o_str_ErrorDescription = 0;
    o_str_ErrorDescription = Translate("Error Unknown");
    if (i_int_ErrorID == 1)
    {
      o_str_ErrorDescription = Translate("Fatal Error");
    }
    if (i_int_ErrorID == 2)
    {
      o_str_ErrorDescription = Translate("Node not Initialized");
    }
    if (i_int_ErrorID == 3)
    {
      o_str_ErrorDescription = Translate("Device not connected");
    }
    if (i_int_ErrorID == 4)
    {
      o_str_ErrorDescription = Translate("CAN error");
    }
    if (i_int_ErrorID == 5)
    {
      o_str_ErrorDescription = Translate("EEProm error");
    }
    if (i_int_ErrorID == 6)
    {
      o_str_ErrorDescription = Translate("Unknown command");
    }
    if (i_int_ErrorID == 7)
    {
      o_str_ErrorDescription = Translate("Unknown parameter");
    }
    if (i_int_ErrorID == 8)
    {
      o_str_ErrorDescription = Translate("Parameter out of range");
    }
    if (i_int_ErrorID == 9)
    {
      o_str_ErrorDescription = Translate("Voltage error");
    }
    if (i_int_ErrorID == 10)
    {
      o_str_ErrorDescription = Translate("Stop");
    }
    if (i_int_ErrorID == 11)
    {
      o_str_ErrorDescription = Translate("Wrong address");
    }
    if (i_int_ErrorID == 13)
    {
      o_str_ErrorDescription = Translate("Shaker init failed");
    }
    if (i_int_ErrorID == 14)
    {
      o_str_ErrorDescription = Translate("Shaker not initialized");
    }
    if (i_int_ErrorID == 15)
    {
      o_str_ErrorDescription = Translate("Shaker step loss");
    }
    if (i_int_ErrorID == 17)
    {
      o_str_ErrorDescription = Translate("Plate lock init failure");
    }
    if (i_int_ErrorID == 18)
    {
      o_str_ErrorDescription = Translate("Plate lock step loss");
    }
    if (i_int_ErrorID == 26)
    {
      o_str_ErrorDescription = Translate("Unknown firmware error");
    }
  }

  function CheckHHSTemperature( variable i_int_HHS_DeviceID, variable i_flt_ExpectedTemp, variable i_flt_TempTolerance ) void {
    private variable var_HHS;
    private variable UpperTempTolerance;
    private variable Timeout5min;
    private variable loopCounter1;
    private variable LowerTempTolerance;
    private variable bool_SimulationMode;
    private variable ActualTemperatureNow;
    private timer timer1;
    private timer TimeoutTimer;
    MECC::TraceComment(Translate(">>>>> Submethod:  CheckHHSTemperature <<<<<"));
    bool_SimulationMode = Util::GetSimulationMode();
    if (bool_SimulationMode == ASWGLOBAL::BOOL::FALSE)
    {
      UpperTempTolerance = i_flt_ExpectedTemp + i_flt_TempTolerance;
      LowerTempTolerance = i_flt_ExpectedTemp - i_flt_TempTolerance;
      if( 0 == TimeoutTimer.SetTimer(hslInfinite) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      {
        loopCounter1 = 0;
        while (ActualTemperatureNow < LowerTempTolerance)
        {
          loopCounter1 = loopCounter1 + 1;
          HSLHamHeaterShaker::GetTemperature(i_int_HHS_DeviceID, ActualTemperatureNow);
          Trace ("***** The current temperature for HHS", var_HHS, " is ", ActualTemperatureNow, "C *****");
          if( 0 == timer1.SetTimer(5) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == timer1.WaitTimer(hslFalse, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          Timeout5min = TimeoutTimer.GetElapsedTime();
          if (Timeout5min >= 300)
          {
            Trace ("***** The temperature for HHS", var_HHS, "could not be reached within 5 minutes.");
            break;
          }
        }
      }
      {
        loopCounter1 = 0;
        while (ActualTemperatureNow > UpperTempTolerance)
        {
          loopCounter1 = loopCounter1 + 1;
          HSLHamHeaterShaker::GetTemperature(i_int_HHS_DeviceID, ActualTemperatureNow);
          Trace ("***** The current temperature for HHS", var_HHS, " is ", ActualTemperatureNow, "C *****");
          if( 0 == timer1.SetTimer(5) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == timer1.WaitTimer(hslFalse, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          Timeout5min = TimeoutTimer.GetElapsedTime();
          if (Timeout5min >= 300)
          {
            Trace ("***** The temperature for HHS", var_HHS, "could not be reached within 5 minutes.");
            break;
          }
        }
      }
    }
    else
    {
      MECC::TraceComment(Translate("***************Method is running in simulator mode***************"));
    }
    MECC::TraceComment(Translate(">>>>> Submethod Complete:  CheckHHSTemperature <<<<<"));
  }

  function GetHHSTemperature( variable i_int_HHS_DeviceID ) void {
    private variable ActualTemperatureNow;
    private variable bool_SimulationMode;
    MECC::TraceComment(Translate(">>>>> Submethod:  GetHHSTemperature <<<<<"));
    bool_SimulationMode = Util::GetSimulationMode();
    if (bool_SimulationMode == ASWGLOBAL::BOOL::FALSE)
    {
      HSLHamHeaterShaker::GetTemperature(i_int_HHS_DeviceID, ActualTemperatureNow);
      Trace ("***** The current temperature for HHS", i_int_HHS_DeviceID, " is ", ActualTemperatureNow, "C *****");
    }
    else
    {
      MECC::TraceComment(Translate("***************Method is running in simulator mode***************"));
    }
    MECC::TraceComment(Translate(">>>>> Submethod Complete:  GetHHSTemperature <<<<<"));
  }

  function InitCPAC(  ) void {
    private variable bool_SimulationMode;
    private dialog dialogHandle_1;
    private dialog dialogHandle_2;
    private variable ret_ErrorText;
    private variable ret_InitCPAC;
    private variable ret_Error;
    private variable ret_FWversion;
    private variable ret_MostRecentError;
    private variable answer_CPACerror;
    MECC::TraceComment(Translate(">>>>>>>>>> InitCPAC:  Start Submethod <<<<<<<<<<"));
    bool_SimulationMode = Util::GetSimulationMode();
    HSLInhecoTECLib::Initialize(0, bool_SimulationMode, ret_InitCPAC);
    if (bool_SimulationMode == ASWGLOBAL::BOOL::FALSE)
    {
      if (ret_InitCPAC != "000")
      {
        HSLInhecoTECLib::GetLastError(ret_MostRecentError);
        dialogHandle_1.SetOutput(Translate("There is an error with the CPAC Controller:\n\n     "), ret_MostRecentError, Translate("\n\nMake sure the unit is turned on and click OK to try again."));
        dialogHandle_1.ShowOutput(Translate("Problem with the CPAC Controller"), hslOKOnly | hslExclamation | hslDefButton1, hslInfinite);
        HSLInhecoTECLib::Initialize(0, bool_SimulationMode, ret_InitCPAC);
        if (ret_InitCPAC != "000")
        {
          HSLInhecoTECLib::GetLastError(ret_MostRecentError);
          dialogHandle_2.SetOutput(Translate("There is still an error with the CPAC Controller:\n\n     "), ret_ErrorText, Translate("\n\nClick Abort to end the method, or Ignore to go the next process step without connecting.  (Retry does nothing.)"));
          answer_CPACerror = dialogHandle_2.ShowOutput(Translate("Problem with the CPAC Controller"), hslAbortRetryIgnore | hslExclamation | hslDefButton1, hslInfinite);
          if (answer_CPACerror == 3)
          {
            abort;
          }
          if (answer_CPACerror == 4)
          {
            MECC::TraceComment(Translate("************ WARNING! Method will continue with the CPAC not working correctly ************"));
          }
          if (answer_CPACerror == 5)
          {
            MECC::TraceComment(Translate("************ WARNING! Method will continue with the CPAC not working correctly ************"));
          }
        }
      }
      HSLInhecoTECLib::SetTraceLevel(1);
      HSLInhecoTECLib::GetFirmwareVersion(0, 1, ret_FWversion, ret_Error);
      Trace ("Firmware version for CPAC:  ", ret_FWversion);
      ReportErrorTextCPAC(ret_Error);
    }
    else
    {
      MECC::TraceComment(Translate("***************Method is running in simulator mode***************"));
    }
    MECC::TraceComment(Translate(">>>>>>>>>> InitCPAC:  Submethod Complete <<<<<<<<<<"));
  }

  private function ReportErrorTextCPAC( variable var_ErrorCPAC ) void {
    private variable ret_ErrorText;
    if (var_ErrorCPAC != "TEC_0")
    {
      if (var_ErrorCPAC != "000")
      {
        HSLInhecoTECLib::GetDescriptionForErrorCode(var_ErrorCPAC, ret_ErrorText);
        Trace ("CPAC ERROR CODE:  ", var_ErrorCPAC);
        Trace ("CPAC ERROR MESSSAGE:  ", ret_ErrorText);
      }
    }
  }

  function SetCPACTemperature( variable i_int_CPAC_Number, variable i_flt_CPAC_Temp ) void {
    private variable ret_Error;
    private variable var_CPACTemp;
    private variable var_CPACTempTenths;
    private variable ret_ActualTemp;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  SetCPACTemperature <<<<<<<<<<"));
    HSLInhecoTECLib::GetActualDeviceTemperature(0, i_int_CPAC_Number, 1, ret_ActualTemp, ret_Error);
    Trace ("Current CPAC Temperature (in tenths of degrees):  ", ret_ActualTemp);
    ReportErrorTextCPAC(ret_Error);
    var_CPACTempTenths = i_flt_CPAC_Temp * 10;
    HSLInhecoTECLib::SetTargetTemperature(0, i_int_CPAC_Number, var_CPACTempTenths, ret_Error);
    ReportErrorTextCPAC(ret_Error);
    HSLInhecoTECLib::GetTargetTemperature(0, i_int_CPAC_Number, var_CPACTemp, ret_Error);
    ReportErrorTextCPAC(ret_Error);
    Trace ("CPAC Temperature set to:  ", var_CPACTemp);
    HSLInhecoTECLib::StartTemperatureControl(0, i_int_CPAC_Number, ret_Error);
    ReportErrorTextCPAC(ret_Error);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  SetCPACTemperature <<<<<<<<<<"));
  }

  function TerminateCPAC(  ) void {
    private variable ret_Error;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod: TerminateCPAC <<<<<<<<<<"));
    HSLInhecoTECLib::StopTemperatureControl(0, 1, ret_Error);
    ReportErrorTextCPAC(ret_Error);
    HSLInhecoTECLib::StopTemperatureControl(0, 2, ret_Error);
    ReportErrorTextCPAC(ret_Error);
    HSLInhecoTECLib::Terminate();
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: TerminateCPAC <<<<<<<<<<"));
  }

  function TerminateHHSs(  ) void {
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod: TerminateHHSs <<<<<<<<<<"));
    HSLHamHeaterShaker::StopAllShaker();
    HSLHamHeaterShaker::Terminate();
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: TerminateHHSs <<<<<<<<<<"));
  }

  function Shake( variable i_int_HHS_DeviceID, variable i_int_Speed, variable i_int_ShakingDuration ) void {
    private variable ActualShakingDuration;
    private variable CheckForEarlyStop;
    private timer Shaking;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Shake <<<<<<<<<<"));
    Trace ("***** Now shaking on HHS", i_int_HHS_DeviceID, " at ", i_int_Speed, "rpm for ", i_int_ShakingDuration, "seconds...");
    HSLHamHeaterShaker::StartShaker(i_int_HHS_DeviceID, i_int_Speed);
    if( 0 == Shaking.SetTimer(i_int_ShakingDuration) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    CheckForEarlyStop = Shaking.WaitTimer(hslTrue, hslTrue);
    if (0 == CheckForEarlyStop)
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if (CheckForEarlyStop == 3)
    {
      MECC::TraceComment(Translate("***** WARNING!  The shaking was stopped prematurely by the operator! *****"));
    }
    ActualShakingDuration = Shaking.GetElapsedTime();
    Trace ("***** Actual Shaking Duration (seconds):  ", ActualShakingDuration);
    GetHHSTemperature(i_int_HHS_DeviceID);
    GetHHSShakingSpeed(i_int_HHS_DeviceID);
    HSLHamHeaterShaker::StopShaker(i_int_HHS_DeviceID);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Shake <<<<<<<<<<"));
  }

  function GetHHSShakingSpeed( variable i_int_HHS_DeviceID ) void {
    private variable ActualSpeed;
    private variable bool_SimulationMode;
    MECC::TraceComment(Translate(">>>>> Submethod:  GetHHSShakingSpeed <<<<<"));
    bool_SimulationMode = Util::GetSimulationMode();
    if (bool_SimulationMode == ASWGLOBAL::BOOL::FALSE)
    {
      HSLHamHeaterShaker::GetShakerSpeed(i_int_HHS_DeviceID, ActualSpeed);
      Trace ("***** The current shake speed for HHS", i_int_HHS_DeviceID, " is ", ActualSpeed, " RPM *****");
    }
    else
    {
      MECC::TraceComment(Translate("***************Method is running in simulator mode***************"));
    }
    MECC::TraceComment(Translate(">>>>> Submethod Complete:  GetHHSTemperature <<<<<"));
  }

  function InitODTC( variable i_str_ODTC_IPAddress, variable & o_int_DeviceID ) variable {
    private variable bool_SimulationMode;
    private variable ret_Value;
    private variable blnReturn;
    private variable str_State;
    private variable int_SiLAReturnValue;
    private variable str_CurrentTime;
    private variable bln_Locked;
    private variable str_DeviceID;
    private variable blnSuccess;
    private variable str_PMSId;
    private variable strDeviceID;
    private variable strLockID;
    private variable intSiLAReturnValue;
    private variable strSiLAMessage;
    o_int_DeviceID = 0;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  InitODTC <<<<<<<<<<"));
    strLockID = Translate("ODTC_CONTROL");
    ret_Value = ASWGLOBAL::BOOL::FALSE;
    bool_SimulationMode = Util::GetSimulationMode();
    blnReturn = Inheco_ODTC::Standard::Connect(Translate(""), i_str_ODTC_IPAddress, Translate(""), bool_SimulationMode, o_int_DeviceID, strSiLAMessage);
    _HandleReturnValue_ODTC(blnReturn, o_int_DeviceID, Translate("Connect"), strSiLAMessage);
    blnSuccess = Inheco_ODTC::Standard::GetStatus(o_int_DeviceID, str_DeviceID, str_State, bln_Locked, str_PMSId, str_CurrentTime, int_SiLAReturnValue, strSiLAMessage);
    _HandleReturnValue_ODTC(blnReturn, o_int_DeviceID, Translate("Get Status"), strSiLAMessage);
    strDeviceID = StrConcat2("Device_", o_int_DeviceID);
    blnSuccess = Inheco_ODTC::Standard::Reset(o_int_DeviceID, bool_SimulationMode, 20, strLockID, strDeviceID, "ODTC Demo", intSiLAReturnValue, strSiLAMessage);
    _HandleReturnValue_ODTC(blnReturn, o_int_DeviceID, Translate("Rest Device"), strSiLAMessage);
    blnSuccess = Inheco_ODTC::Standard::GetStatus(o_int_DeviceID, str_DeviceID, str_State, bln_Locked, str_PMSId, str_CurrentTime, int_SiLAReturnValue, strSiLAMessage);
    _HandleReturnValue_ODTC(blnReturn, o_int_DeviceID, Translate("Get Status"), strSiLAMessage);
    blnSuccess = Inheco_ODTC::Standard::Initialize(o_int_DeviceID, strLockID, intSiLAReturnValue, strSiLAMessage);
    _HandleReturnValue_ODTC(blnReturn, o_int_DeviceID, Translate("Get Status"), strSiLAMessage);
    blnSuccess = Inheco_ODTC::Standard::GetStatus(o_int_DeviceID, str_DeviceID, str_State, bln_Locked, str_PMSId, str_CurrentTime, int_SiLAReturnValue, strSiLAMessage);
    _HandleReturnValue_ODTC(blnReturn, o_int_DeviceID, Translate("Get Status"), strSiLAMessage);
    Trace("-------------------------------------------------------");
    Trace("");
    Trace("    ","Device ID:  ",o_int_DeviceID);
    Trace("    ","State:  ",str_State);
    Trace("    ","Locked:  ",bln_Locked);
    Trace("    ","PMSId:  ",str_PMSId);
    Trace("    ","Current Time:  ",str_CurrentTime);
    Trace("    ","Message:  ",strSiLAMessage);
    Trace("");
    Trace("-------------------------------------------------------");
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  InitODTC <<<<<<<<<<"));
    return (ret_Value);
  }

  private function _Delay( variable i_intSeconds ) void {
    private timer hdlDelay;
    if( 0 == hdlDelay.SetTimer(i_intSeconds) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == hdlDelay.WaitTimer(hslFalse, hslFalse) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
  }

  private function _HandleReturnValue( variable i_blnSuccess, variable i_strFunctionName, variable i_intReturnValue, variable i_strMessage ) void {
    private variable strMethodName;
    private variable strTrace;
    if (i_blnSuccess == ASWGLOBAL::BOOL::TRUE)
    {
      return;
    }
    strMethodName = GetMethodFileName();
    strTrace = StrConcat4("SiLA message was '", i_strMessage, "', SiLA return value was ", i_intReturnValue);
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, i_strFunctionName, strMethodName, strTrace);
    abort;
  }

  function DoorControlODTC( variable i_int_DeviceID, variable bool_OpenDoor ) variable {
    private variable ret_Value;
    private variable blnReturn;
    private variable intReturnValue;
    private variable strMessage;
    private variable bool_SimulationMode;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  DoorControlODTC <<<<<<<<<<"));
    bool_SimulationMode = Util::GetSimulationMode();
    ret_Value = ASWGLOBAL::BOOL::FALSE;
    if (bool_OpenDoor == ASWGLOBAL::BOOL::TRUE)
    {
      MECC::TraceComment(Translate("--------------------------- OPEN ODTC DOOR -----------------------------------"));
      if (bool_SimulationMode == ASWGLOBAL::BOOL::FALSE)
      {
        blnReturn = INHECOODTCCONTROLLER::OpenDoor(i_int_DeviceID, Translate("ODTC_CONTROL"), intReturnValue, strMessage);
        _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::OpenDoor", intReturnValue, strMessage);
      }
    }
    else
    {
      MECC::TraceComment(Translate("--------------------------- CLOSE ODTC DOOR -----------------------------------"));
      if (bool_SimulationMode == ASWGLOBAL::BOOL::FALSE)
      {
        blnReturn = INHECOODTCCONTROLLER::CloseDoor(i_int_DeviceID, Translate("ODTC_CONTROL"), intReturnValue, strMessage);
        _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::CloseDoor", intReturnValue, strMessage);
      }
    }
    ret_Value = ASWGLOBAL::BOOL::TRUE;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  DoorControlODTC <<<<<<<<<<"));
    return (ret_Value);
  }

  function RunScriptODTC( variable i_int_DeviceID, variable i_str_ScriptPath ) variable {
    private variable ret_Value;
    private variable blnReturn;
    private variable intRequestIDForActiveProtocol;
    private variable intTimeForProtocoll;
    private variable str_ScriptName;
    private variable intReturnValue;
    private variable strMessage;
    private variable strTime;
    private variable fltElapsedTime;
    private timer hdlWaitForFinish;
    private variable strArrTemperatureNames[];
    private variable fltArrTemperature[];
    private variable str_State;
    private variable str_DeviceTime;
    private variable bln_Locked;
    private variable str_DeviceID;
    private variable str_ID;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  RunScriptODTC <<<<<<<<<<"));
    ret_Value = ASWGLOBAL::BOOL::FALSE;
    str_ScriptName = HSLExtensions::File::GetFileNameWithoutExtension(i_str_ScriptPath);
    Trace("Script Path:  ",i_str_ScriptPath);
    Trace("Script Name:  ",str_ScriptName);
    blnReturn = INHECOODTCCONTROLLER::ExecuteProtocol(i_int_DeviceID, Translate("ODTC_CONTROL"), i_str_ScriptPath, str_ScriptName, 1, intTimeForProtocoll, intRequestIDForActiveProtocol, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::ExecuteProtocol", intReturnValue, strMessage);
    if( 0 == hdlWaitForFinish.SetTimer(hslInfinite) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    {
      while (ASWGLOBAL::BOOL::TRUE == ASWGLOBAL::BOOL::TRUE)
      {
        blnReturn = INHECOODTCCONTROLLER::GetStatus(i_int_DeviceID, str_State, str_DeviceID, bln_Locked, str_ID, str_DeviceTime, intReturnValue, strMessage);
        _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::GetStatus", intReturnValue, strMessage);
        Trace("ODTC Status:  ",str_State);
        if (str_State == "idle")
        {
          break;
        }
        fltElapsedTime = hdlWaitForFinish.GetElapsedTime();
        Trace("Protocol time:  ",intTimeForProtocoll);
        Trace("Elapsed time:  ",fltElapsedTime);
        if (fltElapsedTime >= intTimeForProtocoll)
        {
          break;
        }
        blnReturn = INHECOODTCCONTROLLER::ReadActualTemperature(i_int_DeviceID, Translate("ODTC_CONTROL"), strTime, fltArrTemperature, strArrTemperatureNames, intReturnValue, strMessage);
        if (intReturnValue == 12)
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, "ReadActualTemperature failed But Error 2005 or error 2006 warning will be ignored Device will continue operation, intReturnValue = ", intReturnValue, ", strMessage = ", strMessage);
          blnReturn = ASWGLOBAL::BOOL::TRUE;
        }
        _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::ReadActualTemperature", intReturnValue, strMessage);
        _Delay(4);
      }
    }
    blnReturn = INHECOODTCCONTROLLER::WaitForStartedProtocolToFinish(i_int_DeviceID, Translate("ODTC_CONTROL"), intTimeForProtocoll, 20, intRequestIDForActiveProtocol, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::WaitForStartedProtocolToFinish", intReturnValue, strMessage);
    ret_Value = ASWGLOBAL::BOOL::TRUE;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  RunScriptODTC <<<<<<<<<<"));
    return (ret_Value);
  }

  function TerminateODTC( variable i_int_DeviceID ) void {
    private variable blnReturn;
    private variable intReturnValue;
    private variable strMessage;
    private variable bool_SimulationMode;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod: TerminateODTC <<<<<<<<<<"));
    bool_SimulationMode = Util::GetSimulationMode();
    blnReturn = INHECOODTCCONTROLLER::StopMethod(i_int_DeviceID, Translate("ODTC_CONTROL"), intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::StopMethod", intReturnValue, strMessage);
    DoorControlODTC(i_int_DeviceID, ASWGLOBAL::BOOL::FALSE);
    blnReturn = INHECOODTCCONTROLLER::ResetDevice(i_int_DeviceID, 40, Translate("ODTC_CONTROL"), "ID", "IDNAME", bool_SimulationMode, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::ResetDevice", intReturnValue, strMessage);
    blnReturn = INHECOODTCCONTROLLER::TerminateSingleDevice(i_int_DeviceID, strMessage);
    if (blnReturn == ASWGLOBAL::BOOL::FALSE)
    {
      abort;
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete: TerminateODTC <<<<<<<<<<"));
  }

  function CheckCPACTemperature( variable i_int_DeviceID, variable i_flt_ExpectedTemp ) void {
    private variable ret_Error;
    private variable ret_ActualTemp_integer;
    private variable ret_ActualTemp_float;
    private variable bool_SimulationMode;
    private variable ret_ActualTemp;
    private dialog dialogHandle_3;
    private variable loopCounter1;
    private variable answer_CPACcheck;
    private timer timer1;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  CheckCPACTemperature <<<<<<<<<<"));
    bool_SimulationMode = Util::GetSimulationMode();
    HSLInhecoTECLib::GetActualDeviceTemperature(0, i_int_DeviceID, 1, ret_ActualTemp, ret_Error);
    ReportErrorTextCPAC(ret_Error);
    if (bool_SimulationMode == 0)
    {
      ret_ActualTemp_integer = StrIVal(ret_ActualTemp);
      ret_ActualTemp_float = ret_ActualTemp_integer / (10 * 1.0);
      Trace ("Expected max CPAC temperature:  ", i_flt_ExpectedTemp);
      Trace ("Current CPAC temperature:  ", ret_ActualTemp_float);
      {
        loopCounter1 = 0;
        while (ret_ActualTemp_float > i_flt_ExpectedTemp)
        {
          loopCounter1 = loopCounter1 + 1;
          if( 0 == timer1.SetTimer(10) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == timer1.WaitTimer(hslFalse, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          HSLInhecoTECLib::GetActualDeviceTemperature(0, i_int_DeviceID, 1, ret_ActualTemp, ret_Error);
          ReportErrorTextCPAC(ret_Error);
          ret_ActualTemp_integer = StrIVal(ret_ActualTemp);
          ret_ActualTemp_float = ret_ActualTemp_integer / (10 * 1.0);
          Trace ("Current CPAC temperature:  ", ret_ActualTemp_float);
          if (loopCounter1 > 60)
          {
            dialogHandle_3.SetOutput(Translate("It is taking a long time for the CPAC to reach temperature.  \n\nClick Abort to end the method, Retry to keep trying to get to temperature, or Ignore to go the next process step."));
            answer_CPACcheck = dialogHandle_3.ShowOutput("", hslAbortRetryIgnore | hslInformation | hslDefButton1, hslInfinite);
          }
          if (answer_CPACcheck == 3)
          {
            abort;
          }
          if (answer_CPACcheck == 5)
          {
            break;
          }
        }
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  CheckCPACTemperature <<<<<<<<<<"));
  }

  private function _HandleReturnValue_ODTC( variable i_blnSuccess, variable i_intDeviceNumber, variable i_strFunctionName, variable i_strMessage ) void {
    private variable _intNumberOfDevices;
    private variable strTrace;
    private variable strFunctionName;
    private variable _strMethodName;
    private variable blnSuccess;
    private variable strMessage;
    private variable intLoopCounter;
    private variable _arrintDeviceIDs[];
    private variable _arrblnInitialized[];
    if (i_blnSuccess == ASWGLOBAL::BOOL::TRUE)
    {
      return;
    }
    strTrace = StrConcat4("SiLA message '", i_strMessage, "' received by device ", i_intDeviceNumber);
    TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, i_strFunctionName, _strMethodName, strTrace);
    {
      for(intLoopCounter = 0; intLoopCounter < _intNumberOfDevices;)
      {
        intLoopCounter = intLoopCounter + 1;
        if (_arrblnInitialized.ElementAt( intLoopCounter -1) == ASWGLOBAL::BOOL::TRUE)
        {
          blnSuccess = Inheco_ODTC::Standard::Terminate(_arrintDeviceIDs.ElementAt( intLoopCounter -1), strMessage);
          if (blnSuccess == ASWGLOBAL::BOOL::FALSE)
          {
            strTrace = StrConcat4("SiLA message was '", strMessage, "'", "");
            strFunctionName = StrConcat2("Terminate device ", intLoopCounter);
            TRACELEVEL::TraceAction(TRACE_LEVEL_RELEASE, TRACELEVEL::ACTION::COMPLETE_WITH_ERROR, strFunctionName, _strMethodName, strTrace);
          }
        }
      }
    }
    abort;
  }

  function StartScriptODTC( variable i_int_DeviceID, variable i_str_ScriptPath, variable & o_int_ScriptTime, variable & o_int_RunID ) variable {
    private variable blnReturn;
    private variable str_ScriptName;
    private variable intReturnValue;
    private variable strMessage;
    private variable ret_Value;
    o_int_ScriptTime = 0;
    o_int_RunID = 0;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  StartScriptODTC <<<<<<<<<<"));
    ret_Value = ASWGLOBAL::BOOL::FALSE;
    Trace("Script Path:  ",i_str_ScriptPath);
    Trace("Script Name:  ",str_ScriptName);
    str_ScriptName = HSLExtensions::File::GetFileNameWithoutExtension(i_str_ScriptPath);
    blnReturn = INHECOODTCCONTROLLER::ExecuteProtocol(i_int_DeviceID, Translate("ODTC_CONTROL"), i_str_ScriptPath, str_ScriptName, 1, o_int_ScriptTime, o_int_RunID, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::ExecuteProtocol", intReturnValue, strMessage);
    o_int_ScriptTime = 86400;
    ret_Value = ASWGLOBAL::BOOL::TRUE;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  StartScriptODTC <<<<<<<<<<"));
    return (ret_Value);
  }

  function WaitForScriptODTC( variable i_int_DeviceID, variable i_int_ScriptTime, variable i_int_RunID ) variable {
    private variable blnReturn;
    private variable intReturnValue;
    private variable strMessage;
    private variable ret_Value;
    private variable str_State;
    private variable str_DeviceTime;
    private variable bln_Locked;
    private variable str_DeviceID;
    private variable str_ID;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  WaitForScriptODTC <<<<<<<<<<"));
    ret_Value = ASWGLOBAL::BOOL::FALSE;
    blnReturn = INHECOODTCCONTROLLER::WaitForStartedProtocolToFinish(i_int_DeviceID, Translate("ODTC_CONTROL"), i_int_ScriptTime, 20, i_int_RunID, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::WaitForStartedProtocolToFinish", intReturnValue, strMessage);
    blnReturn = INHECOODTCCONTROLLER::GetStatus(i_int_DeviceID, str_State, str_DeviceID, bln_Locked, str_ID, str_DeviceTime, intReturnValue, strMessage);
    _HandleReturnValue(blnReturn, "INHECOODTCCONTROLLER::GetStatus", intReturnValue, strMessage);
    Trace("ODTC Status:  ",str_State);
    ret_Value = ASWGLOBAL::BOOL::TRUE;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  WaitForScriptODTC <<<<<<<<<<"));
    return (ret_Value);
  }
} // library namespace
