#pragma once
#include "HSLSeqLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLUtilLib.hsl"
#include "HSLML_STARLib.hsl"
#include "HSLUtilLib2.hsl"
#include "HSLLabwrAccess\\HSLLabwrAccess.hsl"
#include "NIST_Device_Controllers.hs_"
#include "HSLMthLib.hsl"
#include "HSLDeckVisualize.hsl"
#include "TADM Export Curves\\TADM_Export_Curves.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"
#include "HSLSTCCLib.hs_"

namespace NIST_NANO_PROCESSES {
  function Add_Ethanol_Variable( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_TipsToUse1000ul, sequence & seq_AspirationPosition, sequence seq_DispensePosition, variable var_LiquidClassEthanol, variable & var_TrackingEthanolVolume, variable var_VolEtOH ) void ;
  private function Add_Ethanol_Variable_OLD( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_TipsToUse1000ul, sequence & seq_AspirationPosition, sequence seq_DispensePosition, variable var_LiquidClassEthanol, variable & var_TrackingEthanolVolume, variable var_VolEtOH ) void ;
  function Add_ReagentFromTub( device & ML_STAR, variable var_NumberOfSamples, sequence seq_AspirationPosition, sequence seq_DispensePosition, sequence & seq_TipsToUse300ul, variable var_VolPerSampleWell, variable var_LiquidClass300F, variable var_RetractHeight, variable var_MixCycles, variable var_MixVolume, variable str_ProcessName, variable str_TrackingFilePath, variable bool_UseTrackingFile ) void ;
  function Add_ReagentFromVial( device & ML_STAR, variable var_NumberOfSamples, sequence seq_AspirationPosition, sequence seq_DispensePosition, sequence & seq_TipsToUse50ul, variable var_VolPerSampleWell, variable var_LiquidClass50F, variable var_RetractHeight, variable var_MixCycles, variable var_MixVolume, variable str_ProcessName, variable str_TrackingFilePath, variable bool_UseTrackingFile ) void ;
  function AliquotBeadsToBeadPlate( device & ML_STAR, sequence i_seq_BeadSource, sequence i_seq_BeadPlate, sequence & i_seq_HighVolumeTips, variable i_flt_AliquotVolume, variable i_int_SampleCount ) void ;
  function Incubate( variable i_int_IncubationTime, variable i_bool_StoppableTimer, variable i_str_TimerDescription ) void ;
  function IncubateOnODTC( device & ML_STAR, sequence i_seq_PlateSource, sequence i_seq_PlateSourceWithLid, sequence i_seq_ODTC, sequence i_seq_LidPark, sequence i_seq_CORE_Grip, variable i_int_DeviceID_ODTC, variable i_int_IncubationTime, variable i_str_IncubationDescription, variable i_bool_TestingMode, variable i_bool_ComfortLid ) void ;
  function IncubateOnODTC_OneProtocol( device & ML_STAR, sequence i_seq_PlateSource, sequence i_seq_PlateSourceWithLid, sequence i_seq_ODTC, sequence i_seq_LidPark, sequence i_seq_CORE_Grip, variable i_int_DeviceID_ODTC, variable i_str_IncubationDescription, variable i_str_IncubationProtocol, variable i_bool_ComfortLid ) void ;
  function IncubateOnODTC_TwoProtocolsAndTimer( device & ML_STAR, sequence i_seq_PlateSource, sequence i_seq_PlateSourceWithLid, sequence i_seq_ODTC, sequence i_seq_LidPark, sequence i_seq_CORE_Grip, variable i_int_DeviceID_ODTC, variable i_int_IncubationTime, variable i_str_IncubationDescription, variable i_str_IncubationProtocol1, variable i_str_IncubationProtocol2, variable i_bool_TestingMode, variable i_bool_ComfortLid ) void ;
  function IncubateOnODTC_WithProtocols( device & ML_STAR, sequence i_seq_PlateSource, sequence i_seq_PlateSourceWithLid, sequence i_seq_ODTC, sequence i_seq_LidPark, sequence i_seq_CORE_Grip, variable i_int_DeviceID_ODTC, variable i_int_IncubationTime, variable i_str_IncubationDescription, variable i_str_IncubationProtocol, variable i_str_StartEndProtocol, variable i_bool_TestingMode, variable i_bool_ComfortLid ) void ;
  function MixBeads( device & ML_STAR, sequence & i_seq_BeadSource, sequence & i_seq_HighVolumeTips ) void ;
  function MoveLeftArmOutOfWay( device & ML_STAR ) void ;
  function MoveRightArmOutOfWay( device & ML_STAR ) void ;
  function MultiDispense_Reagent( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_TipsToUse1000ul, sequence & seq_AspirationPosition, sequence seq_DispensePosition, variable var_LiquidClass, variable & var_TrackingReagentlVolume, variable var_VolReagent, variable var_DispenseHeight ) void ;
  function ScanPlate( device & ML_STAR, sequence i_seq_SourcePlate, sequence i_seq_CORE_Grips, variable i_int_TrackToScan, variable i_bool_UseAutoLoad, variable & o_str_BarcodeScanned ) void ;
  function ScanPlate2( device & ML_STAR, sequence i_seq_SourcePlate, sequence i_seq_CORE_Grips, variable i_int_TrackToScan, variable i_bool_EjectGripper, variable i_bool_UseAutoLoad, variable & o_str_BarcodeScanned ) void ;
  function Transfer_Adapters_PlateToPlate( device & ML_STAR, variable var_SampleCount, sequence & seq_TipsToUse, sequence seq_AspirationPosition, sequence seq_DispensePosition, variable var_VolumeToTransfer, variable var_LiquidClass, variable var_AspirationHeight, variable var_DispenseHeight, variable str_ProcessName, variable str_TrackingFilePath, variable bool_UseTrackingFile ) void ;
  function TransportPlate_CORE_Grip( device & ML_STAR, sequence i_seq_SourcePosition, sequence i_seq_DestPosition, sequence & i_seq_CORE_GripSource, variable i_flt_X_Offset, variable i_flt_PressDistance, variable i_bool_EjectGripper, variable i_int_TransportType, variable i_bool_CheckPlate ) void ;
  function TransportPlate_iSWAP( device & ML_STAR, sequence i_seq_SourcePlate, sequence i_seq_DestPlate, variable i_bool_GripLeft ) void ;
  function Volume_Check( device & ML_STAR, sequence i_seq_Trough, variable i_Liquid_Class, variable & o_Volume_Detected ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    NIST_DEVICE_CONTROLLERS::_InitLibrary();
    TADM_EXPORT_CURVES::_InitLibrary();
  }
  function _ExitLibrary() {
    NIST_DEVICE_CONTROLLERS::_ExitLibrary();
    TADM_EXPORT_CURVES::_ExitLibrary();
  }

  function AliquotBeadsToBeadPlate( device & ML_STAR, sequence i_seq_BeadSource, sequence i_seq_BeadPlate, sequence & i_seq_HighVolumeTips, variable i_flt_AliquotVolume, variable i_int_SampleCount ) void {
    private variable int_Remainder;
    private variable flt_ConditioningVolume;
    private variable int_FullColumn_SampleCount;
    private variable int_TotalColumns;
    private variable flt_TotalConditioningVolume;
    private variable int_AspRound;
    private variable flt_MaximumAspVolume;
    private variable int_DispenseCount;
    private variable int_DispenseRounds;
    private variable str_BeadSourceLabID;
    private variable str_TotalColumns;
    private variable str_MaxDispenseCount;
    private variable int_MaxDispenseCount;
    private variable flt_AspVolume;
    private variable str_BeadPlateLabID;
    private variable int_TotalPositions;
    private variable bool_SimulationMode;
    MECC::TraceComment(Translate("------------------------------ AliquotBeadsToBeadPlate - START"));
    bool_SimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    MoveRightArmOutOfWay(ML_STAR);
    str_BeadSourceLabID = SeqGetLabwareId(i_seq_BeadSource);
    str_BeadPlateLabID = SeqGetLabwareId(i_seq_BeadPlate);
    int_TotalColumns = i_int_SampleCount / 8;
    str_TotalColumns = StrConcat2(int_TotalColumns, Translate(""));
    int_TotalColumns = StrIVal(str_TotalColumns);
    int_Remainder = i_int_SampleCount % 8;
    if (int_Remainder > 0)
    {
      int_TotalColumns = int_TotalColumns + 1;
    }
    int_FullColumn_SampleCount = int_TotalColumns * 8;
    flt_ConditioningVolume = 50.0;
    flt_MaximumAspVolume = 800.0;
    int_MaxDispenseCount = flt_MaximumAspVolume / i_flt_AliquotVolume;
    str_MaxDispenseCount = StrConcat2(int_MaxDispenseCount, Translate(""));
    int_MaxDispenseCount = StrIVal(str_MaxDispenseCount);
    flt_TotalConditioningVolume = flt_ConditioningVolume * 2;
    i_seq_BeadPlate.SetCount(int_FullColumn_SampleCount);
    int_TotalPositions = int_FullColumn_SampleCount;
    Trace("------------------------------------------------");
    Trace("");
    Trace("Bead Source Lab ID:  ",str_BeadSourceLabID);
    Trace("Bead Plate Lab ID:  ",str_BeadPlateLabID);
    Trace("Max Dispense Count:  ",int_MaxDispenseCount);
    Trace("Total Positions to Dispense:  ",int_TotalPositions);
    Trace("Aliquot Volume:  ",i_flt_AliquotVolume," uL");
    Trace("");
    Trace("------------------------------------------------");
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    {
      int_AspRound = 0;
      while (int_TotalPositions > 0)
      {
        int_AspRound = int_AspRound + 1;
        int_DispenseRounds = int_TotalPositions / 8;
        int_Remainder = int_TotalPositions % 8;
        if (int_Remainder > 0)
        {
          int_DispenseRounds = int_DispenseRounds + 1;
        }
        if (int_DispenseRounds > int_MaxDispenseCount)
        {
          int_DispenseRounds = int_MaxDispenseCount;
        }
        flt_AspVolume = int_DispenseRounds * i_flt_AliquotVolume;
        flt_AspVolume = flt_AspVolume + flt_TotalConditioningVolume;
        Trace("");
        Trace("Aspiration Round:  ",int_AspRound);
        Trace("Aspiration Volume:  ",flt_AspVolume," uL");
        Trace("Dispense Rounds:  ",int_DispenseRounds);
        Trace("Remainder Wells:  ",int_TotalPositions);
        Trace("");
        MECC::TraceComment(Translate("-------------------------------------------\nAspirate beads\n-------------------------------------------"));
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        MECC::TraceComment(Translate("-------------------------------------------\nDispense conditioning volume back\n-------------------------------------------"));
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        MECC::TraceComment(Translate("-------------------------------------------\nMulti-Dispense to plate\n-------------------------------------------"));
        {
          int_DispenseCount = 0;
          while (
             (ML_STAR.BeadPlate.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, ML_STAR.BeadPlate, 1);
            int_DispenseCount = int_DispenseCount + 1;
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            int_TotalPositions = int_TotalPositions - 8;
            if (int_DispenseCount == int_DispenseRounds)
            {
              break;
            }
            if (
               (ML_STAR.BeadPlate.GetCurrentPosition() > 0 && ML_STAR.BeadPlate.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          ML_STAR.BeadPlate.SetMax(ML_STAR.BeadPlate.GetTotal());
        }
        MECC::TraceComment(Translate("-------------------------------------------\nDispense conditioning volume back\n-------------------------------------------"));
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      }
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    MECC::TraceComment(Translate("------------------------------ AliquotBeadsToBeadPlate - FINISH"));
  }

  function Incubate( variable i_int_IncubationTime, variable i_bool_StoppableTimer, variable i_str_TimerDescription ) void {
    private variable int_ActualIncubationTime;
    private timer time_IncubateTime;
    MECC::TraceComment(Translate("------------------------------ Incubate - START"));
    Trace("----------------------------------------------------------------");
    Trace("");
    Trace("Incubation Time:  ",i_int_IncubationTime);
    Trace("Is timer stoppable:  ",i_bool_StoppableTimer);
    Trace("");
    Trace("----------------------------------------------------------------");
    if( 0 == time_IncubateTime.SetTimer(i_int_IncubationTime) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    Util::SetTimerViewName(time_IncubateTime, i_str_TimerDescription);
    if (i_bool_StoppableTimer == 1)
    {
      if( 0 == time_IncubateTime.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    else
    {
      if( 0 == time_IncubateTime.WaitTimer(hslTrue, hslFalse) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
    int_ActualIncubationTime = time_IncubateTime.GetElapsedTime();
    Trace("");
    Trace("     ","Actual Incubation Time:  ",int_ActualIncubationTime," seconds");
    Trace("");
    MECC::TraceComment(Translate("------------------------------ Incubate - FINISH"));
  }

  function MixBeads( device & ML_STAR, sequence & i_seq_BeadSource, sequence & i_seq_HighVolumeTips ) void {
    private variable str_BeadSource_LabId;
    private variable flt_VolumeMeasured_uL;
    private variable flt_VolumeDetected;
    private variable flt_VolumeMix;
    private variable flt_MaxMixVolume;
    private variable flt_75PercentMixVolume;
    private variable int_MixCycles;
    private variable bool_SimulationMode;
    private variable flt_50PercentMixVolume;
    private variable flt_VolumeAsp;
    MECC::TraceComment(Translate("------------------------------ MixBeads - START"));
    bool_SimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    MoveRightArmOutOfWay(ML_STAR);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    str_BeadSource_LabId = SeqGetLabwareId(i_seq_BeadSource);
    flt_MaxMixVolume = 900.0;
    int_MixCycles = 5;
    MECC::TraceComment(Translate("-------------------------------------------------------------------------------------------------------------------------\nMeasure bead volume in reservoir to determine how much to mix\n-------------------------------------------------------------------------------------------------------------------------"));
    Volume_Check(ML_STAR, i_seq_BeadSource, Translate("AFDIL_Kapa_HVF_Bead_LevelCheck"), flt_VolumeDetected);
    flt_VolumeMeasured_uL = flt_VolumeDetected * 1000.0;
    flt_75PercentMixVolume = flt_VolumeMeasured_uL * 0.75;
    flt_50PercentMixVolume = flt_VolumeMeasured_uL * 0.5;
    flt_VolumeMix = flt_75PercentMixVolume / (8 * 1.0);
    flt_VolumeAsp = flt_50PercentMixVolume / (8 * 1.0);
    if (flt_VolumeMix >= flt_MaxMixVolume)
    {
      flt_VolumeMix = flt_MaxMixVolume;
    }
    if (flt_VolumeAsp >= flt_MaxMixVolume)
    {
      flt_VolumeAsp = flt_MaxMixVolume;
    }
    Trace("---------------------------------------------------");
    Trace("");
    Trace("Bead Source Lab ID:  ",str_BeadSource_LabId);
    Trace("Estimated Volume:  ",flt_VolumeDetected," mL");
    Trace("Mix volume per channel:  ",flt_VolumeMix," uL");
    Trace("Mix Cycles:  ",int_MixCycles);
    Trace("");
    Trace("---------------------------------------------------");
    MECC::TraceComment(Translate("-------------------------------------------------------------------------------------------------------------------------\nMix from the bottom of the reservoir\n-------------------------------------------------------------------------------------------------------------------------"));
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    MECC::TraceComment(Translate("-------------------------------------------------------------------------------------------------------------------------\nMix at the top of the liquid level\n-------------------------------------------------------------------------------------------------------------------------"));
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    MECC::TraceComment(Translate("------------------------------ MixBeads - FINISH"));
  }

  function Volume_Check( device & ML_STAR, sequence i_seq_Trough, variable i_Liquid_Class, variable & o_Volume_Detected ) void {
    private variable var_TrackingVolume;
    private variable ret_MeasuredVol_Ch1;
    private variable Vol_Ch1;
    private variable bool_SimulationMode;
    o_Volume_Detected = 0;
    bool_SimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    MECC::TraceComment(Translate("Need to determine if there is enough liquid in the tub for the next aspiration step. "));
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ret_MeasuredVol_Ch1 = HSLML_STAR::MeasureContainerVolume2(ML_STAR, i_seq_Trough, 0, Translate("10000000"), 0, 0, 0);
    Vol_Ch1 = HSLML_STAR::GetContainerVolume(1);
    var_TrackingVolume = Vol_Ch1;
    if (bool_SimulationMode == 1)
    {
      var_TrackingVolume = 12;
    }
    Trace (">>> After the cLLD check, the volume in tub is:  ", var_TrackingVolume);
    o_Volume_Detected = var_TrackingVolume;
  }

  function ScanPlate( device & ML_STAR, sequence i_seq_SourcePlate, sequence i_seq_CORE_Grips, variable i_int_TrackToScan, variable i_bool_UseAutoLoad, variable & o_str_BarcodeScanned ) void {
    private variable flt_GripWidth;
    private variable flt_GripOpen;
    private variable flt_GripHeight;
    private variable bool_SimulationMode;
    private dialog customDialog_1;
    private variable retValueDialog;
    private variable str_LabID;
    private variable arr_StateLoaded[];
    private variable arr_PlateLabID[];
    private variable arr_StateBlink[];
    o_str_BarcodeScanned = 0;
    MECC::TraceComment(Translate("------------------------------ ScanPlate- START"));
    bool_SimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    MoveRightArmOutOfWay(ML_STAR);
    o_str_BarcodeScanned = Translate("0000");
    flt_GripHeight = 3.0;
    flt_GripWidth = 80.0;
    flt_GripOpen = 84.0;
    str_LabID = SeqGetLabwareId(i_seq_SourcePlate);
    arr_PlateLabID.SetSize(0);
    arr_PlateLabID.AddAsLast(str_LabID);
    arr_StateBlink.SetSize(0);
    arr_StateBlink.AddAsLast(5);
    arr_StateLoaded.SetSize(0);
    arr_StateLoaded.AddAsLast(1);
    MECC::TraceComment(Translate("-------------------------------------------\nMove Autoload to selected track\n-------------------------------------------"));
    if (i_bool_UseAutoLoad == 1)
    {
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
      MECC::TraceComment(Translate("-------------------------------------------\nGet plate\n-------------------------------------------"));
      ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      MECC::TraceComment(Translate("-------------------------------------------\nScan plate\n-------------------------------------------"));
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._E59329BC_113D_451D_9468_F2327ECEE33E("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"); // ZSwapReadBarcode
        	o_str_BarcodeScanned = arrRetValues[3];
      }
      MECC::TraceComment(Translate("-------------------------------------------\nReturn plate\n-------------------------------------------"));
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    }
    if (o_str_BarcodeScanned == "0000")
    {
      MECC::TraceComment(Translate("\n************************************* MANUAL BARCODE REQUIRED!\n"));
      DeckVisualize::UpdateLoadedLabware(ML_STAR, arr_PlateLabID, arr_StateBlink, Translate("Make labware blink"));
      customDialog_1.InitCustomDialog("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");
      customDialog_1.ShowCustomDialog();
      retValueDialog = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
      o_str_BarcodeScanned = customDialog_1.GetCustomDialogProperty( "Plate_Barcode.Text" );
      DeckVisualize::UpdateLoadedLabware(ML_STAR, arr_PlateLabID, arr_StateLoaded, Translate("Make labware stop blinking"));
    }
    MECC::TraceComment(Translate("------------------------------ ScanPlate- FINISH"));
  }

  function Transfer_Adapters_PlateToPlate( device & ML_STAR, variable var_SampleCount, sequence & seq_TipsToUse, sequence seq_AspirationPosition, sequence seq_DispensePosition, variable var_VolumeToTransfer, variable var_LiquidClass, variable var_AspirationHeight, variable var_DispenseHeight, variable str_ProcessName, variable str_TrackingFilePath, variable bool_UseTrackingFile ) void {
    private variable str_ReturnAsp;
    private variable Asp_Submerge;
    private variable loopCounter1;
    private variable Asp_cLLD_sensitivity;
    private variable str_ReturnDisp;
    private variable bool_LiquidFollowing;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Transfer_PlateToPlate <<<<<<<<<<"));
    MoveRightArmOutOfWay(ML_STAR);
    if (var_AspirationHeight == 0)
    {
      Asp_cLLD_sensitivity = 1;
      Asp_Submerge = 0.5;
      bool_LiquidFollowing = 1;
    }
    else
    {
      if (var_AspirationHeight == 999)
      {
        Asp_Submerge = 1.0;
        bool_LiquidFollowing = 0;
      }
      else
      {
        Asp_cLLD_sensitivity = 0;
        Asp_Submerge = 0;
        bool_LiquidFollowing = 0;
      }
    }
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    seq_DispensePosition.SetCount(var_SampleCount);
    {
      loopCounter1 = 0;
      while (
         (seq_DispensePosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_TipsToUse, 1);
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        if (var_AspirationHeight == 999)
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            	str_ReturnAsp = arrRetValues[2];
          }
        }
        else
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            	str_ReturnAsp = arrRetValues[2];
          }
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          	str_ReturnDisp = arrRetValues[2];
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (bool_UseTrackingFile == 1)
        {
          ML_STAR._13722C3E_1C8F_4237_BFAF_A7CE81549723("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"); // WaitForTadmUpload
          TADM_EXPORT_CURVES::TransferReport(ML_STAR, str_TrackingFilePath, str_ReturnAsp, str_ReturnDisp, var_LiquidClass, str_ProcessName);
        }
        if (
           (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse.SetMax(seq_TipsToUse.GetTotal());
      seq_AspirationPosition.SetCurrentPosition(1);
      seq_DispensePosition.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Transfer_PlateToPlate <<<<<<<<<<"));
  }

  function TransportPlate_iSWAP( device & ML_STAR, sequence i_seq_SourcePlate, sequence i_seq_DestPlate, variable i_bool_GripLeft ) void {
    private variable flt_GripWidth;
    private variable str_SourcePlateLabID;
    private variable flt_GripOpen;
    private variable flt_GripHeight;
    private variable str_DestPlateLabID;
    MECC::TraceComment(Translate("------------------------------ TransportPlate_iSWAP - START"));
    MoveLeftArmOutOfWay(ML_STAR);
    flt_GripHeight = 5.0;
    flt_GripWidth = 80.0;
    flt_GripOpen = 90.0;
    str_SourcePlateLabID = SeqGetLabwareId(i_seq_SourcePlate);
    str_DestPlateLabID = SeqGetLabwareId(i_seq_DestPlate);
    Trace("----------------------------------------------------------------");
    Trace("");
    Trace("Source Plate Lab ID:  ",str_SourcePlateLabID);
    Trace("Destination Plate Lab ID:  ",str_DestPlateLabID);
    Trace("Grip from the left:  ",i_bool_GripLeft);
    Trace("");
    Trace("----------------------------------------------------------------");
    ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    MECC::TraceComment(Translate("------------------------------ TransportPlate_iSWAP - FINISH"));
  }

  function MoveLeftArmOutOfWay( device & ML_STAR ) void {
    ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
  }

  function MoveRightArmOutOfWay( device & ML_STAR ) void {
    private variable flt_SafeLocation;
    private variable int_AdjustedXCoord;
    private variable flt_AdjustedXCoord;
    private variable str_Param;
    private variable str_AdjustedXCoord;
    flt_SafeLocation = 2025.0;
    flt_AdjustedXCoord = flt_SafeLocation * 10;
    str_AdjustedXCoord = StrConcat2(flt_AdjustedXCoord, Translate(""));
    int_AdjustedXCoord = StrIVal(str_AdjustedXCoord);
    str_AdjustedXCoord = StrConcat2(int_AdjustedXCoord, Translate(""));
    str_AdjustedXCoord = StrFillLeft(str_AdjustedXCoord, Translate("0"), 5);
    str_Param = StrConcat2(Translate("xs"), str_AdjustedXCoord);
    Trace("Parameter:  ",str_Param);
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  }

  function TransportPlate_CORE_Grip( device & ML_STAR, sequence i_seq_SourcePosition, sequence i_seq_DestPosition, sequence & i_seq_CORE_GripSource, variable i_flt_X_Offset, variable i_flt_PressDistance, variable i_bool_EjectGripper, variable i_int_TransportType, variable i_bool_CheckPlate ) void {
    private variable flt_GripWidth;
    private variable str_SourcePlateLabID;
    private variable flt_GripOpen;
    private variable flt_InverseXShift;
    private variable flt_GripHeight;
    private variable str_DestPlateLabID;
    private variable int_TransportType;
    MECC::TraceComment(Translate("------------------------------ TransportPlate_CORE_Grip - START"));
    MoveRightArmOutOfWay(ML_STAR);
    if (i_int_TransportType == 0)
    {
      MECC::TraceComment(Translate("-----------------------------------------------------\nTransport Plate\n-----------------------------------------------------"));
      flt_GripHeight = 3.0;
      flt_GripWidth = 80.0;
      flt_GripOpen = 86.0;
      int_TransportType = 0;
    }
    if (i_int_TransportType == 1)
    {
      MECC::TraceComment(Translate("-----------------------------------------------------\nTransport Lid\n-----------------------------------------------------"));
      flt_GripHeight = 3.0;
      flt_GripWidth = 77.5;
      flt_GripOpen = 86.0;
      int_TransportType = 1;
    }
    if (i_int_TransportType == 2)
    {
      MECC::TraceComment(Translate("-----------------------------------------------------\nTransport Plate + Lid\n-----------------------------------------------------"));
      if(0){
        flt_GripHeight = 5.0;
      }
      flt_GripHeight = 10.0;
      flt_GripWidth = 80.0;
      flt_GripOpen = 87.0;
      int_TransportType = 0;
    }
    if (i_int_TransportType == 3)
    {
      MECC::TraceComment(Translate("-----------------------------------------------------\nTransport Comfort Lid\n-----------------------------------------------------"));
      flt_GripHeight = 3.0;
      flt_GripWidth = 83.0;
      flt_GripOpen = 90.0;
      int_TransportType = 1;
    }
    str_SourcePlateLabID = SeqGetLabwareId(i_seq_SourcePosition);
    str_DestPlateLabID = SeqGetLabwareId(i_seq_DestPosition);
    Trace("----------------------------------------------------------------");
    Trace("");
    Trace("Source Plate Lab ID:  ",str_SourcePlateLabID);
    Trace("Destination Plate Lab ID:  ",str_DestPlateLabID);
    Trace("X Shift distance:  ",i_flt_X_Offset," mm");
    Trace("Press on distance:  ",i_flt_PressDistance," mm");
    Trace("Eject CORE Grip after transport:  ",i_bool_EjectGripper);
    Trace("");
    Trace("----------------------------------------------------------------");
    flt_InverseXShift = i_flt_X_Offset * -1;
    if (i_flt_X_Offset != 0.0)
    {
      HSLLabwrAccess::RelativePositionValuesSetForLabwareID(ML_STAR, str_SourcePlateLabID, i_flt_X_Offset, 0.0, 0.0, 0.0);
      HSLLabwrAccess::RelativePositionValuesSetForLabwareID(ML_STAR, str_DestPlateLabID, i_flt_X_Offset, 0.0, 0.0, 0.0);
    }
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    if (i_flt_X_Offset != 0.0)
    {
      HSLLabwrAccess::RelativePositionValuesSetForLabwareID(ML_STAR, str_SourcePlateLabID, flt_InverseXShift, 0.0, 0.0, 0.0);
      HSLLabwrAccess::RelativePositionValuesSetForLabwareID(ML_STAR, str_DestPlateLabID, flt_InverseXShift, 0.0, 0.0, 0.0);
    }
    MECC::TraceComment(Translate("------------------------------ TransportPlate_CORE_Grip - FINISH"));
  }

  function Add_ReagentFromVial( device & ML_STAR, variable var_NumberOfSamples, sequence seq_AspirationPosition, sequence seq_DispensePosition, sequence & seq_TipsToUse50ul, variable var_VolPerSampleWell, variable var_LiquidClass50F, variable var_RetractHeight, variable var_MixCycles, variable var_MixVolume, variable str_ProcessName, variable str_TrackingFilePath, variable bool_UseTrackingFile ) void {
    private variable NumberOfVials;
    private variable PositionID_Vial_1;
    private variable PositionID_Vial_2;
    private variable PositionID_Vial_3;
    private variable PositionID_Vial_4;
    private variable str_ReturnAsp;
    private variable loopCounter1;
    private variable loopCounter2;
    private variable LabwareID_Vial;
    private variable bool_SimulationMode;
    private variable str_ReturnDisp;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_ReagentFromVial <<<<<<<<<<"));
    bool_SimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    MoveRightArmOutOfWay(ML_STAR);
    NumberOfVials = SeqGetTotal(seq_AspirationPosition);
    LabwareID_Vial = SeqGetLabwareId(seq_AspirationPosition);
    PositionID_Vial_1 = SeqGetPositionId(seq_AspirationPosition);
    if (NumberOfVials > 1)
    {
      SeqIncrement(seq_AspirationPosition, 1);
      PositionID_Vial_2 = SeqGetPositionId(seq_AspirationPosition);
      if (NumberOfVials == 4)
      {
        SeqIncrement(seq_AspirationPosition, 1);
        PositionID_Vial_3 = SeqGetPositionId(seq_AspirationPosition);
        SeqIncrement(seq_AspirationPosition, 1);
        PositionID_Vial_4 = SeqGetPositionId(seq_AspirationPosition);
      }
    }
    SeqRemoveAll(seq_AspirationPosition);
    if (NumberOfVials == 2)
    {
      {
        for(loopCounter2 = 0; loopCounter2 < 4;)
        {
          loopCounter2 = loopCounter2 + 1;
          SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
          SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_2);
        }
      }
    }
    else
    {
      if (NumberOfVials == 4)
      {
        {
          for(loopCounter2 = 0; loopCounter2 < 2;)
          {
            loopCounter2 = loopCounter2 + 1;
            SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
            SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_2);
            SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_3);
            SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_4);
          }
        }
      }
      if (NumberOfVials == 1)
      {
        {
          for(loopCounter2 = 0; loopCounter2 < 8;)
          {
            loopCounter2 = loopCounter2 + 1;
            SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
          }
        }
      }
    }
    seq_AspirationPosition.SetCurrentPosition(1);
    seq_DispensePosition.SetCount(var_NumberOfSamples);
    MECC::TraceComment(Translate("********** Now pipetting reagent to destination plate"));
    {
      loopCounter1 = 0;
      while (
         (seq_DispensePosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_TipsToUse50ul, 1);
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          	str_ReturnAsp = arrRetValues[2];
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          	str_ReturnDisp = arrRetValues[2];
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (bool_UseTrackingFile == 1)
        {
          ML_STAR._13722C3E_1C8F_4237_BFAF_A7CE81549723("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"); // WaitForTadmUpload
          TADM_EXPORT_CURVES::TransferReport(ML_STAR, str_TrackingFilePath, str_ReturnAsp, str_ReturnDisp, var_LiquidClass50F, str_ProcessName);
        }
        if (
           (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse50ul.SetMax(seq_TipsToUse50ul.GetTotal());
      seq_AspirationPosition.SetCurrentPosition(1);
      seq_DispensePosition.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_ReagentFromVial <<<<<<<<<<"));
  }

  function IncubateOnODTC( device & ML_STAR, sequence i_seq_PlateSource, sequence i_seq_PlateSourceWithLid, sequence i_seq_ODTC, sequence i_seq_LidPark, sequence i_seq_CORE_Grip, variable i_int_DeviceID_ODTC, variable i_int_IncubationTime, variable i_str_IncubationDescription, variable i_bool_TestingMode, variable i_bool_ComfortLid ) void {
    private variable str_LabID;
    private variable int_LidType;
    MECC::TraceComment(Translate("------------------------------ IncubateOnODTC - START"));
    if (i_bool_ComfortLid == 1)
    {
      MECC::TraceComment(Translate("------------------------- HAMILTON COMFORT LID"));
      int_LidType = 3;
    }
    else
    {
      MECC::TraceComment(Translate("------------------------- RE-USEABLE BIORAD LID"));
      int_LidType = 1;
    }
    MECC::TraceComment(Translate("-------------------------------------------\nMove lid to plate\n-------------------------------------------"));
    str_LabID = SeqGetLabwareId(i_seq_PlateSourceWithLid);
    HSLLabwrAccess::RelativePositionValuesSetForLabwareID(ML_STAR, str_LabID, 0.0, 0.0, 2.0, 0.0);
    TransportPlate_CORE_Grip(ML_STAR, i_seq_LidPark, i_seq_PlateSourceWithLid, i_seq_CORE_Grip, 0.0, 0.0, 0, int_LidType, 1);
    HSLLabwrAccess::RelativePositionValuesSetForLabwareID(ML_STAR, str_LabID, 0.0, 0.0, -2.0, 0.0);
    MECC::TraceComment(Translate("-------------------------------------------\nMove plate to ODTC\n-------------------------------------------"));
    NIST_DEVICE_CONTROLLERS::DoorControlODTC(i_int_DeviceID_ODTC, 1);
    TransportPlate_CORE_Grip(ML_STAR, i_seq_PlateSource, i_seq_ODTC, i_seq_CORE_Grip, 0.0, 0.0, 1, 2, 1);
    MECC::TraceComment(Translate("-------------------------------------------\nIncubate in ODTC\n-------------------------------------------"));
    NIST_DEVICE_CONTROLLERS::DoorControlODTC(i_int_DeviceID_ODTC, 0);
    Incubate(i_int_IncubationTime, i_bool_TestingMode, i_str_IncubationDescription);
    NIST_DEVICE_CONTROLLERS::DoorControlODTC(i_int_DeviceID_ODTC, 1);
    MECC::TraceComment(Translate("-------------------------------------------\nMove plate off ODTC\n-------------------------------------------"));
    TransportPlate_CORE_Grip(ML_STAR, i_seq_ODTC, i_seq_PlateSource, i_seq_CORE_Grip, 0.0, 0.0, 0, 2, 1);
    MECC::TraceComment(Translate("-------------------------------------------\nMove lid off plate\n-------------------------------------------"));
    TransportPlate_CORE_Grip(ML_STAR, i_seq_PlateSourceWithLid, i_seq_LidPark, i_seq_CORE_Grip, 0.0, 0.0, 1, int_LidType, 1);
    MECC::TraceComment(Translate("------------------------------ IncubateOnODTC - FINISH"));
  }

  function ScanPlate2( device & ML_STAR, sequence i_seq_SourcePlate, sequence i_seq_CORE_Grips, variable i_int_TrackToScan, variable i_bool_EjectGripper, variable i_bool_UseAutoLoad, variable & o_str_BarcodeScanned ) void {
    private variable flt_GripWidth;
    private variable flt_GripOpen;
    private variable flt_GripHeight;
    private variable bool_SimulationMode;
    private dialog customDialog_2;
    private variable retValueDialog;
    private variable str_LabID;
    private variable arr_StateLoaded[];
    private variable arr_PlateLabID[];
    private variable arr_StateBlink[];
    o_str_BarcodeScanned = 0;
    MECC::TraceComment(Translate("------------------------------ ScanPlate- START"));
    bool_SimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    MoveRightArmOutOfWay(ML_STAR);
    o_str_BarcodeScanned = Translate("0000");
    flt_GripHeight = 3.0;
    flt_GripWidth = 80.0;
    flt_GripOpen = 84.0;
    str_LabID = SeqGetLabwareId(i_seq_SourcePlate);
    arr_PlateLabID.SetSize(0);
    arr_PlateLabID.AddAsLast(str_LabID);
    arr_StateBlink.SetSize(0);
    arr_StateBlink.AddAsLast(5);
    arr_StateLoaded.SetSize(0);
    arr_StateLoaded.AddAsLast(1);
    if (i_bool_UseAutoLoad == 1)
    {
      MECC::TraceComment(Translate("-------------------------------------------\nGet plate\n-------------------------------------------"));
      ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      MECC::TraceComment(Translate("-------------------------------------------\nScan plate\n-------------------------------------------"));
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._E59329BC_113D_451D_9468_F2327ECEE33E("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"); // ZSwapReadBarcode
        	o_str_BarcodeScanned = arrRetValues[3];
      }
      MECC::TraceComment(Translate("-------------------------------------------\nReturn plate\n-------------------------------------------"));
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    }
    if (o_str_BarcodeScanned == "0000")
    {
      MECC::TraceComment(Translate("\n************************************* MANUAL BARCODE REQUIRED!\n"));
      DeckVisualize::UpdateLoadedLabware(ML_STAR, arr_PlateLabID, arr_StateBlink, Translate("Make labware blink"));
      customDialog_2.InitCustomDialog("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");
      customDialog_2.ShowCustomDialog();
      retValueDialog = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
      o_str_BarcodeScanned = customDialog_2.GetCustomDialogProperty( "Plate_Barcode.Text" );
      DeckVisualize::UpdateLoadedLabware(ML_STAR, arr_PlateLabID, arr_StateLoaded, Translate("Make labware stop blinking"));
    }
    MECC::TraceComment(Translate("------------------------------ ScanPlate- FINISH"));
  }

  function Add_Ethanol_Variable( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_TipsToUse1000ul, sequence & seq_AspirationPosition, sequence seq_DispensePosition, variable var_LiquidClassEthanol, variable & var_TrackingEthanolVolume, variable var_VolEtOH ) void {
    private variable Columns_Remaining;
    private variable ret_PositionsEthanol;
    private variable VolumeToAspirate_8channels_mL;
    private variable AspVolume_Ethanol1;
    private variable NumberOfCompleteColumns;
    private variable ret_MeasuredVol_Ch1;
    private variable AspVolume_Ethanol;
    private variable RemainingWells;
    private variable Time_Incubate30sec;
    private variable AspVolume_Ethanol2;
    private variable AspVolume_Ethanol3;
    private variable NumberOfColumns;
    private variable VolAsp8ch_mL_inclDeadVol;
    private variable NumberOfDispenses1;
    private variable MaxNumberOfDispenses;
    private variable MixCycles;
    private variable VolumeToAspirate;
    private variable NumberOfDispenses2;
    private variable NumberOfDispenses3;
    private variable ActualIncubationDuration;
    private variable Vol_Ch1;
    private variable g_DevelopmentMode;
    private variable VolumeToAspirate_8channels_uL;
    private variable Pointer_EthanolSequence;
    private variable RemainderAspiration;
    private variable loopCounter3;
    private variable loopCounter4;
    private variable NumberOfDispenses;
    private variable SimOn;
    private variable NumberOfAspirations;
    private timer Incubate30sec;
    private variable arr_dispenses[];
    private variable int_TotalDispenseRounds;
    MoveRightArmOutOfWay(ML_STAR);
    if (g_DevelopmentMode == 6)
    {
      Time_Incubate30sec = 1;
    }
    else
    {
      Time_Incubate30sec = 23;
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_Ethanol <<<<<<<<<<"));
    arr_dispenses.SetSize(0);
    NumberOfCompleteColumns = var_NumberOfSamples / 8;
    RemainingWells = var_NumberOfSamples % 8;
    Trace ("Number of Complete Columns in Destination Plate:  ", NumberOfCompleteColumns);
    Trace ("Number of Wells in Last, Incomplete Column:  ", RemainingWells);
    if (RemainingWells > 0)
    {
      NumberOfColumns = NumberOfCompleteColumns + 1;
    }
    else
    {
      NumberOfColumns = NumberOfCompleteColumns;
    }
    AspVolume_Ethanol = var_VolEtOH * NumberOfColumns;
    Trace ("Required Total Volume for Ethanol, Per Row, Max = ", AspVolume_Ethanol);
    if (AspVolume_Ethanol <= 1000)
    {
      NumberOfAspirations = 1;
      NumberOfDispenses1 = NumberOfColumns;
      AspVolume_Ethanol1 = AspVolume_Ethanol;
      arr_dispenses.AddAsLast(NumberOfDispenses1);
    }
    else
    {
      MaxNumberOfDispenses = 1000 / var_VolEtOH;
      MaxNumberOfDispenses = StrConcat2(MaxNumberOfDispenses, Translate(""));
      MaxNumberOfDispenses = StrIVal(MaxNumberOfDispenses);
      Columns_Remaining = NumberOfColumns;
      {
        NumberOfAspirations = 0;
        while (Columns_Remaining > 0)
        {
          NumberOfAspirations = NumberOfAspirations + 1;
          NumberOfDispenses = MaxNumberOfDispenses;
          if (Columns_Remaining < MaxNumberOfDispenses)
          {
            NumberOfDispenses = Columns_Remaining;
          }
          arr_dispenses.AddAsLast(NumberOfDispenses);
          Columns_Remaining = Columns_Remaining - NumberOfDispenses;
        }
      }
      if(0){
        NumberOfAspirations = AspVolume_Ethanol / 1000;
        RemainderAspiration = AspVolume_Ethanol % 1000;
        if (RemainderAspiration > 0)
        {
          NumberOfAspirations = NumberOfAspirations + 1;
        }
        NumberOfAspirations = MthCeiling(NumberOfAspirations);
        NumberOfDispenses1 = 5;
        NumberOfDispenses2 = NumberOfColumns - NumberOfDispenses1;
        if (NumberOfDispenses2 > 5)
        {
          NumberOfDispenses3 = NumberOfDispenses2 - 5;
          NumberOfDispenses2 = 5;
        }
        AspVolume_Ethanol1 = 200 * NumberOfDispenses1;
        AspVolume_Ethanol2 = 200 * NumberOfDispenses2;
        AspVolume_Ethanol3 = 200 * NumberOfDispenses3;
      }
    }
    if(0){
      Trace ("Number of Aspirations:  ", NumberOfAspirations);
      Trace ("Number of Columns for the first set of dispenses:  ", NumberOfDispenses1);
      Trace ("Number of Columns for the second set of dispenses:  ", NumberOfDispenses2);
      Trace ("Number of Columns for the third set of dispenses:  ", NumberOfDispenses3);
      Trace ("Aspiration volume for the first set of dispenses:  ", AspVolume_Ethanol1);
      Trace ("Aspiration volume for the second set of dispenses:  ", AspVolume_Ethanol2);
      Trace ("Aspiration volume for the third set of dispenses:  ", AspVolume_Ethanol3);
    }
    Util2::Debug::TraceArray(Translate("Number of Dispenses per Aspiration"), arr_dispenses);
    int_TotalDispenseRounds=arr_dispenses.GetSize();
    {
      loopCounter4 = 0;
      while (
         (seq_DispensePosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_TipsToUse1000ul, 1);
        loopCounter4 = loopCounter4 + 1;
        if (loopCounter4 > int_TotalDispenseRounds)
        {
          break;
        }
        MixCycles = 0;
        NumberOfDispenses=arr_dispenses.GetAt(loopCounter4-1);
        VolumeToAspirate = NumberOfDispenses * var_VolEtOH;
        if (loopCounter4 == 1)
        {
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        }
        if (loopCounter4 == 1)
        {
          if(0){
            MixCycles = 1;
          }
        }
        MECC::TraceComment(Translate("Need to determine if there is enough liquid in the tub for the next aspiration step. "));
        Trace (">>> Expected ethanol volume in tub:  ", var_TrackingEthanolVolume);
        if (var_TrackingEthanolVolume <= 0)
        {
          MECC::TraceComment(Translate("At the start of a run, or if going to a new or refilled tub, the volume is unknown, so we have to measure it:"));
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ret_MeasuredVol_Ch1 = HSLML_STAR::MeasureContainerVolume2(ML_STAR, seq_AspirationPosition, 0, Translate("10000000"), 0, 0, 0);
          Vol_Ch1 = HSLML_STAR::GetContainerVolume(1);
          var_TrackingEthanolVolume = Vol_Ch1;
          SimOn = HSLML_STAR::IsSimulatorMode(ML_STAR);
          if (SimOn == 1)
          {
            var_TrackingEthanolVolume = 12;
          }
          Trace (">>> After the cLLD check, the ethanol volume in tub is:  ", var_TrackingEthanolVolume);
        }
        VolumeToAspirate_8channels_uL = VolumeToAspirate * 8;
        VolumeToAspirate_8channels_mL = VolumeToAspirate_8channels_uL / (1000 * 1.0);
        VolAsp8ch_mL_inclDeadVol = VolumeToAspirate_8channels_mL + 2;
        Trace (">>> Next step needs this volume in tube (mL), inclulding dead volume:  ", VolAsp8ch_mL_inclDeadVol);
        if (VolAsp8ch_mL_inclDeadVol > var_TrackingEthanolVolume)
        {
          MECC::TraceComment(Translate("***** Insufficient volume of ethanol in tub.  Go to next tub, if available. *****"));
          var_TrackingEthanolVolume = 0;
          ret_PositionsEthanol = SeqGetTotal(seq_AspirationPosition);
          if (ret_PositionsEthanol >= 16)
          {
            Pointer_EthanolSequence = seq_AspirationPosition.GetCurrentPosition();
            if (Pointer_EthanolSequence <= 9)
            {
              SeqIncrement(seq_AspirationPosition, 8);
              MECC::TraceComment(Translate("***** Sequence incremented.  Going to next tub. Need to measure volume in tub. *****"));
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              ret_MeasuredVol_Ch1 = HSLML_STAR::MeasureContainerVolume2(ML_STAR, seq_AspirationPosition, 0, Translate("10000000"), 0, 0, 0);
              Vol_Ch1 = HSLML_STAR::GetContainerVolume(1);
              var_TrackingEthanolVolume = Vol_Ch1;
              SimOn = HSLML_STAR::IsSimulatorMode(ML_STAR);
              if (SimOn == 1)
              {
                var_TrackingEthanolVolume = 12;
              }
              Trace ("After the cLLD check, the ethanol volume in tub is:  ", var_TrackingEthanolVolume);
              if (VolAsp8ch_mL_inclDeadVol > var_TrackingEthanolVolume)
              {
                MECC::TraceComment(Translate("***** INADEQUATE VOLUME IN NEW TUB.  ASPIRATE STEP WILL LIKELY RESULT IN ERROR, REQUIRING USER INTERVENTION.  *****"));
              }
            }
            else
            {
              MECC::TraceComment(Translate("***** Sequence not incremented.  No other tubs available.  *****\n***** ASPIRATE STEP WILL LIKELY RESULT IN ERROR, REQUIRING USER INTERVENTION. *****"));
            }
          }
          else
          {
            MECC::TraceComment(Translate("***** Sequence not incremented.  No other tubs available.  *****\n***** ASPIRATE STEP WILL LIKELY RESULT IN ERROR, REQUIRING USER INTERVENTION. *****"));
          }
        }
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        var_TrackingEthanolVolume = var_TrackingEthanolVolume - VolumeToAspirate_8channels_mL;
        Trace ("New, calculated ethanol volume in tub:  ", var_TrackingEthanolVolume);
        {
          for(loopCounter3 = 0; loopCounter3 < NumberOfDispenses;)
          {
            loopCounter3 = loopCounter3 + 1;
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
        }
        if(0){
          if (loopCounter4 == 1)
          {
            if( 0 == Incubate30sec.SetTimer(Time_Incubate30sec) )
            {
                  MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
        }
        if (
           (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse1000ul.SetMax(seq_TipsToUse1000ul.GetTotal());
      seq_DispensePosition.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    if(0){
      STCC::ResetFilterSequences();
      STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
      {
        variable _FilterIdsArray_3[];
        variable _ColumnIdsArray_3[];
        variable _ColumnNamesArray_3[];
        variable _ExperimentsArray_3[];
        _FilterIdsArray_3.SetSize(0);
        _ColumnNamesArray_3.SetSize(14);
        _ColumnIdsArray_3.SetSize(14);
        _ColumnNamesArray_3.SetAt(0, "RecordId");
        _ColumnIdsArray_3.SetAt(0, 0);
        _ColumnNamesArray_3.SetAt(1, "TRackBC");
        _ColumnIdsArray_3.SetAt(1, 1);
        _ColumnNamesArray_3.SetAt(2, "TLabwareId");
        _ColumnIdsArray_3.SetAt(2, 2);
        _ColumnNamesArray_3.SetAt(3, "TPositionId");
        _ColumnIdsArray_3.SetAt(3, 3);
        _ColumnNamesArray_3.SetAt(4, "TPositionBC");
        _ColumnIdsArray_3.SetAt(4, 4);
        _ColumnNamesArray_3.SetAt(5, "TStatusSummary");
        _ColumnIdsArray_3.SetAt(5, 5);
        _ColumnNamesArray_3.SetAt(6, "TSumStateDescription");
        _ColumnIdsArray_3.SetAt(6, 6);
        _ColumnNamesArray_3.SetAt(7, "TVolume");
        _ColumnIdsArray_3.SetAt(7, 7);
        _ColumnNamesArray_3.SetAt(8, "SRackBC");
        _ColumnIdsArray_3.SetAt(8, 8);
        _ColumnNamesArray_3.SetAt(9, "SLabwareId");
        _ColumnIdsArray_3.SetAt(9, 9);
        _ColumnNamesArray_3.SetAt(10, "SPositionId");
        _ColumnIdsArray_3.SetAt(10, 10);
        _ColumnNamesArray_3.SetAt(11, "SPositionBC");
        _ColumnIdsArray_3.SetAt(11, 11);
        _ColumnNamesArray_3.SetAt(12, "ActionDateTime");
        _ColumnIdsArray_3.SetAt(12, 12);
        _ColumnNamesArray_3.SetAt(13, "UserName");
        _ColumnIdsArray_3.SetAt(13, 13);
        _ExperimentsArray_3.SetSize(0);
        STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_3, 0, _ColumnIdsArray_3, _ColumnNamesArray_3, _ExperimentsArray_3, "Ethanol_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
      }
    }
    seq_DispensePosition.SetCurrentPosition(1);
    if(0){
      if( 0 == Incubate30sec.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      ActualIncubationDuration = Incubate30sec.GetElapsedTime();
      Trace ("***** Actual incubation time (expected minimum 30 seconds for first column of wells):  ", ActualIncubationDuration);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_Ethanol <<<<<<<<<<"));
  }

  function Add_ReagentFromTub( device & ML_STAR, variable var_NumberOfSamples, sequence seq_AspirationPosition, sequence seq_DispensePosition, sequence & seq_TipsToUse300ul, variable var_VolPerSampleWell, variable var_LiquidClass300F, variable var_RetractHeight, variable var_MixCycles, variable var_MixVolume, variable str_ProcessName, variable str_TrackingFilePath, variable bool_UseTrackingFile ) void {
    private variable str_ReturnAsp;
    private variable loopCounter1;
    private variable bool_SimulationMode;
    private variable str_ReturnDisp;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_ReagentFromTub <<<<<<<<<<"));
    bool_SimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    MoveRightArmOutOfWay(ML_STAR);
    seq_DispensePosition.SetCount(var_NumberOfSamples);
    MECC::TraceComment(Translate("********** Now pipetting reagent to destination plate"));
    {
      loopCounter1 = 0;
      while (
         (seq_DispensePosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_TipsToUse300ul, 1);
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          	str_ReturnAsp = arrRetValues[2];
        }
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          	str_ReturnDisp = arrRetValues[2];
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (bool_UseTrackingFile == 1)
        {
          ML_STAR._13722C3E_1C8F_4237_BFAF_A7CE81549723("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"); // WaitForTadmUpload
          TADM_EXPORT_CURVES::TransferReport(ML_STAR, str_TrackingFilePath, str_ReturnAsp, str_ReturnDisp, var_LiquidClass300F, str_ProcessName);
        }
        if (
           (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse300ul.SetMax(seq_TipsToUse300ul.GetTotal());
      seq_AspirationPosition.SetCurrentPosition(1);
      seq_DispensePosition.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_ReagentFromTub <<<<<<<<<<"));
  }

  function IncubateOnODTC_WithProtocols( device & ML_STAR, sequence i_seq_PlateSource, sequence i_seq_PlateSourceWithLid, sequence i_seq_ODTC, sequence i_seq_LidPark, sequence i_seq_CORE_Grip, variable i_int_DeviceID_ODTC, variable i_int_IncubationTime, variable i_str_IncubationDescription, variable i_str_IncubationProtocol, variable i_str_StartEndProtocol, variable i_bool_TestingMode, variable i_bool_ComfortLid ) void {
    private variable str_LabID;
    private variable int_LidType;
    private variable int_RunID;
    private variable int_ScriptTime;
    MECC::TraceComment(Translate("------------------------------ IncubateOnODTC With Protocols- START"));
    if (i_bool_ComfortLid == 1)
    {
      MECC::TraceComment(Translate("------------------------- HAMILTON COMFORT LID"));
      int_LidType = 3;
    }
    else
    {
      MECC::TraceComment(Translate("------------------------- RE-USEABLE BIORAD LID"));
      int_LidType = 1;
    }
    MECC::TraceComment(Translate("-------------------------------------------\nEnsure ODTC is at starting temperature\n-------------------------------------------"));
    NIST_DEVICE_CONTROLLERS::StartScriptODTC(i_int_DeviceID_ODTC, i_str_StartEndProtocol, int_ScriptTime, int_RunID);
    NIST_DEVICE_CONTROLLERS::WaitForScriptODTC(i_int_DeviceID_ODTC, int_ScriptTime, int_RunID);
    MECC::TraceComment(Translate("-------------------------------------------\nMove lid to plate\n-------------------------------------------"));
    str_LabID = SeqGetLabwareId(i_seq_PlateSourceWithLid);
    HSLLabwrAccess::RelativePositionValuesSetForLabwareID(ML_STAR, str_LabID, 0.0, 0.0, 2.0, 0.0);
    TransportPlate_CORE_Grip(ML_STAR, i_seq_LidPark, i_seq_PlateSourceWithLid, i_seq_CORE_Grip, 0.0, 0.0, 0, int_LidType, 1);
    HSLLabwrAccess::RelativePositionValuesSetForLabwareID(ML_STAR, str_LabID, 0.0, 0.0, -2.0, 0.0);
    MECC::TraceComment(Translate("-------------------------------------------\nMove plate to ODTC\n-------------------------------------------"));
    NIST_DEVICE_CONTROLLERS::DoorControlODTC(i_int_DeviceID_ODTC, 1);
    TransportPlate_CORE_Grip(ML_STAR, i_seq_PlateSource, i_seq_ODTC, i_seq_CORE_Grip, 0.0, 0.0, 1, 2, 1);
    NIST_DEVICE_CONTROLLERS::DoorControlODTC(i_int_DeviceID_ODTC, 0);
    MECC::TraceComment(Translate("-------------------------------------------\nEnsure ODTC is at incubation temperature\n-------------------------------------------"));
    NIST_DEVICE_CONTROLLERS::StartScriptODTC(i_int_DeviceID_ODTC, i_str_IncubationProtocol, int_ScriptTime, int_RunID);
    NIST_DEVICE_CONTROLLERS::WaitForScriptODTC(i_int_DeviceID_ODTC, int_ScriptTime, int_RunID);
    MECC::TraceComment(Translate("-------------------------------------------\nIncubate in ODTC\n-------------------------------------------"));
    Incubate(i_int_IncubationTime, i_bool_TestingMode, i_str_IncubationDescription);
    MECC::TraceComment(Translate("-------------------------------------------\nEnsure ODTC is at ending temperature\n-------------------------------------------"));
    NIST_DEVICE_CONTROLLERS::StartScriptODTC(i_int_DeviceID_ODTC, i_str_StartEndProtocol, int_ScriptTime, int_RunID);
    NIST_DEVICE_CONTROLLERS::WaitForScriptODTC(i_int_DeviceID_ODTC, int_ScriptTime, int_RunID);
    NIST_DEVICE_CONTROLLERS::DoorControlODTC(i_int_DeviceID_ODTC, 1);
    MECC::TraceComment(Translate("-------------------------------------------\nMove plate off ODTC\n-------------------------------------------"));
    TransportPlate_CORE_Grip(ML_STAR, i_seq_ODTC, i_seq_PlateSource, i_seq_CORE_Grip, 0.0, 0.0, 0, 2, 1);
    MECC::TraceComment(Translate("-------------------------------------------\nMove lid off plate\n-------------------------------------------"));
    TransportPlate_CORE_Grip(ML_STAR, i_seq_PlateSourceWithLid, i_seq_LidPark, i_seq_CORE_Grip, 0.0, 0.0, 1, int_LidType, 1);
    MECC::TraceComment(Translate("------------------------------ IncubateOnODTC With Protocols - FINISH"));
  }

  function IncubateOnODTC_OneProtocol( device & ML_STAR, sequence i_seq_PlateSource, sequence i_seq_PlateSourceWithLid, sequence i_seq_ODTC, sequence i_seq_LidPark, sequence i_seq_CORE_Grip, variable i_int_DeviceID_ODTC, variable i_str_IncubationDescription, variable i_str_IncubationProtocol, variable i_bool_ComfortLid ) void {
    private variable str_LabID;
    private variable int_LidType;
    private variable bool_SimulationMode;
    MECC::TraceComment(Translate("------------------------------ IncubateOnODTC - START"));
    bool_SimulationMode = Util::GetSimulationMode();
    if (i_bool_ComfortLid == 1)
    {
      MECC::TraceComment(Translate("------------------------- HAMILTON COMFORT LID"));
      int_LidType = 3;
    }
    else
    {
      MECC::TraceComment(Translate("------------------------- RE-USEABLE BIORAD LID"));
      int_LidType = 1;
    }
    Trace("Incubation Protocol:  ",i_str_IncubationProtocol);
    MECC::TraceComment(Translate("-------------------------------------------\nMove lid to plate\n-------------------------------------------"));
    str_LabID = SeqGetLabwareId(i_seq_PlateSourceWithLid);
    HSLLabwrAccess::RelativePositionValuesSetForLabwareID(ML_STAR, str_LabID, 0.0, 0.0, 2.0, 0.0);
    TransportPlate_CORE_Grip(ML_STAR, i_seq_LidPark, i_seq_PlateSourceWithLid, i_seq_CORE_Grip, 0.0, 0.0, 0, int_LidType, 1);
    HSLLabwrAccess::RelativePositionValuesSetForLabwareID(ML_STAR, str_LabID, 0.0, 0.0, -2.0, 0.0);
    MECC::TraceComment(Translate("-------------------------------------------\nMove plate to ODTC\n-------------------------------------------"));
    NIST_DEVICE_CONTROLLERS::DoorControlODTC(i_int_DeviceID_ODTC, 1);
    TransportPlate_CORE_Grip(ML_STAR, i_seq_PlateSource, i_seq_ODTC, i_seq_CORE_Grip, 0.0, 0.0, 1, 2, 1);
    MECC::TraceComment(Translate("-------------------------------------------\nIncubate in ODTC\n-------------------------------------------"));
    NIST_DEVICE_CONTROLLERS::DoorControlODTC(i_int_DeviceID_ODTC, 0);
    Trace("*************************************************************************************");
    Trace("Now starting ",i_str_IncubationDescription," incubation");
    if (bool_SimulationMode == 0)
    {
      NIST_DEVICE_CONTROLLERS::RunScriptODTC(i_int_DeviceID_ODTC, i_str_IncubationProtocol);
    }
    Trace(i_str_IncubationDescription," incubation ended");
    Trace("*************************************************************************************");
    NIST_DEVICE_CONTROLLERS::DoorControlODTC(i_int_DeviceID_ODTC, 1);
    MECC::TraceComment(Translate("-------------------------------------------\nMove plate off ODTC\n-------------------------------------------"));
    TransportPlate_CORE_Grip(ML_STAR, i_seq_ODTC, i_seq_PlateSource, i_seq_CORE_Grip, 0.0, 0.0, 0, 2, 1);
    MECC::TraceComment(Translate("-------------------------------------------\nMove lid off plate\n-------------------------------------------"));
    TransportPlate_CORE_Grip(ML_STAR, i_seq_PlateSourceWithLid, i_seq_LidPark, i_seq_CORE_Grip, 0.0, 0.0, 1, int_LidType, 1);
    MECC::TraceComment(Translate("------------------------------ IncubateOnODTC - FINISH"));
  }

  function IncubateOnODTC_TwoProtocolsAndTimer( device & ML_STAR, sequence i_seq_PlateSource, sequence i_seq_PlateSourceWithLid, sequence i_seq_ODTC, sequence i_seq_LidPark, sequence i_seq_CORE_Grip, variable i_int_DeviceID_ODTC, variable i_int_IncubationTime, variable i_str_IncubationDescription, variable i_str_IncubationProtocol1, variable i_str_IncubationProtocol2, variable i_bool_TestingMode, variable i_bool_ComfortLid ) void {
    private variable str_LabID;
    private variable int_LidType;
    private variable bool_SimulationMode;
    MECC::TraceComment(Translate("------------------------------ IncubateOnODTC - START"));
    bool_SimulationMode = Util::GetSimulationMode();
    if (i_bool_ComfortLid == 1)
    {
      MECC::TraceComment(Translate("------------------------- HAMILTON COMFORT LID"));
      int_LidType = 3;
    }
    else
    {
      MECC::TraceComment(Translate("------------------------- RE-USEABLE BIORAD LID"));
      int_LidType = 1;
    }
    Trace("Incubation Protocol 1:  ",i_str_IncubationProtocol1);
    Trace("Incubation Protocol 2:  ",i_str_IncubationProtocol2);
    MECC::TraceComment(Translate("-------------------------------------------\nMove lid to plate\n-------------------------------------------"));
    str_LabID = SeqGetLabwareId(i_seq_PlateSourceWithLid);
    HSLLabwrAccess::RelativePositionValuesSetForLabwareID(ML_STAR, str_LabID, 0.0, 0.0, 2.0, 0.0);
    TransportPlate_CORE_Grip(ML_STAR, i_seq_LidPark, i_seq_PlateSourceWithLid, i_seq_CORE_Grip, 0.0, 0.0, 0, int_LidType, 1);
    HSLLabwrAccess::RelativePositionValuesSetForLabwareID(ML_STAR, str_LabID, 0.0, 0.0, -2.0, 0.0);
    MECC::TraceComment(Translate("-------------------------------------------\nMove plate to ODTC\n-------------------------------------------"));
    NIST_DEVICE_CONTROLLERS::DoorControlODTC(i_int_DeviceID_ODTC, 1);
    TransportPlate_CORE_Grip(ML_STAR, i_seq_PlateSource, i_seq_ODTC, i_seq_CORE_Grip, 0.0, 0.0, 1, 2, 1);
    MECC::TraceComment(Translate("-------------------------------------------\nIncubate in ODTC\n-------------------------------------------"));
    NIST_DEVICE_CONTROLLERS::DoorControlODTC(i_int_DeviceID_ODTC, 0);
    Trace("*************************************************************************************");
    Trace("Now starting ",i_str_IncubationDescription," incubation");
    if (bool_SimulationMode == 0)
    {
      NIST_DEVICE_CONTROLLERS::RunScriptODTC(i_int_DeviceID_ODTC, i_str_IncubationProtocol1);
    }
    Incubate(i_int_IncubationTime, i_bool_TestingMode, i_str_IncubationDescription);
    if (bool_SimulationMode == 0)
    {
      NIST_DEVICE_CONTROLLERS::DoorControlODTC(i_int_DeviceID_ODTC, i_str_IncubationProtocol2);
    }
    Trace(i_str_IncubationDescription," incubation ended");
    Trace("*************************************************************************************");
    NIST_DEVICE_CONTROLLERS::DoorControlODTC(i_int_DeviceID_ODTC, 1);
    MECC::TraceComment(Translate("-------------------------------------------\nMove plate off ODTC\n-------------------------------------------"));
    TransportPlate_CORE_Grip(ML_STAR, i_seq_ODTC, i_seq_PlateSource, i_seq_CORE_Grip, 0.0, 0.0, 0, 2, 1);
    MECC::TraceComment(Translate("-------------------------------------------\nMove lid off plate\n-------------------------------------------"));
    TransportPlate_CORE_Grip(ML_STAR, i_seq_PlateSourceWithLid, i_seq_LidPark, i_seq_CORE_Grip, 0.0, 0.0, 1, int_LidType, 1);
    MECC::TraceComment(Translate("------------------------------ IncubateOnODTC - FINISH"));
  }

  private function Add_Ethanol_Variable_OLD( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_TipsToUse1000ul, sequence & seq_AspirationPosition, sequence seq_DispensePosition, variable var_LiquidClassEthanol, variable & var_TrackingEthanolVolume, variable var_VolEtOH ) void {
    private variable Columns_Remaining;
    private variable VolumeToAspirate_8channels_mL;
    private variable ret_PositionsEthanol;
    private variable NumberOfCompleteColumns;
    private variable AspVolume_Ethanol1;
    private variable AspVolume_Ethanol2;
    private variable ret_MeasuredVol_Ch1;
    private variable RemainingWells;
    private variable Time_Incubate30sec;
    private variable AspVolume_Ethanol;
    private variable NumberOfColumns;
    private variable AspVolume_Ethanol3;
    private variable VolAsp8ch_mL_inclDeadVol;
    private variable MaxNumberOfDispenses;
    private variable NumberOfDispenses1;
    private variable MixCycles;
    private variable VolumeToAspirate;
    private variable NumberOfDispenses2;
    private variable Vol_Ch1;
    private variable ActualIncubationDuration;
    private variable NumberOfDispenses3;
    private variable int_TotalDispenseRounds;
    private variable g_DevelopmentMode;
    private variable VolumeToAspirate_8channels_uL;
    private variable Pointer_EthanolSequence;
    private variable RemainderAspiration;
    private variable loopCounter3;
    private variable loopCounter4;
    private variable NumberOfDispenses;
    private variable NumberOfAspirations;
    private variable SimOn;
    private timer Incubate30sec;
    private variable arr_dispenses[];
    MoveRightArmOutOfWay(ML_STAR);
    if (g_DevelopmentMode == 6)
    {
      Time_Incubate30sec = 1;
    }
    else
    {
      Time_Incubate30sec = 23;
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_Ethanol <<<<<<<<<<"));
    arr_dispenses.SetSize(0);
    NumberOfCompleteColumns = var_NumberOfSamples / 8;
    RemainingWells = var_NumberOfSamples % 8;
    Trace ("Number of Complete Columns in Destination Plate:  ", NumberOfCompleteColumns);
    Trace ("Number of Wells in Last, Incomplete Column:  ", RemainingWells);
    if (RemainingWells > 0)
    {
      NumberOfColumns = NumberOfCompleteColumns + 1;
    }
    else
    {
      NumberOfColumns = NumberOfCompleteColumns;
    }
    AspVolume_Ethanol = var_VolEtOH * NumberOfColumns;
    Trace ("Required Total Volume for Ethanol, Per Row, Max = ", AspVolume_Ethanol);
    if (AspVolume_Ethanol <= 1000)
    {
      NumberOfAspirations = 1;
      NumberOfDispenses1 = NumberOfColumns;
      AspVolume_Ethanol1 = AspVolume_Ethanol;
      arr_dispenses.AddAsLast(NumberOfDispenses1);
    }
    else
    {
      MaxNumberOfDispenses = 1000 / var_VolEtOH;
      MaxNumberOfDispenses = StrConcat2(MaxNumberOfDispenses, Translate(""));
      MaxNumberOfDispenses = StrIVal(MaxNumberOfDispenses);
      Columns_Remaining = NumberOfColumns;
      {
        NumberOfAspirations = 0;
        while (Columns_Remaining > 0)
        {
          NumberOfAspirations = NumberOfAspirations + 1;
          NumberOfDispenses = MaxNumberOfDispenses;
          if (Columns_Remaining < MaxNumberOfDispenses)
          {
            NumberOfDispenses = Columns_Remaining;
          }
          arr_dispenses.AddAsLast(NumberOfDispenses);
          Columns_Remaining = Columns_Remaining - NumberOfDispenses;
        }
      }
      if(0){
        NumberOfAspirations = AspVolume_Ethanol / 1000;
        RemainderAspiration = AspVolume_Ethanol % 1000;
        if (RemainderAspiration > 0)
        {
          NumberOfAspirations = NumberOfAspirations + 1;
        }
        NumberOfAspirations = MthCeiling(NumberOfAspirations);
        NumberOfDispenses1 = 5;
        NumberOfDispenses2 = NumberOfColumns - NumberOfDispenses1;
        if (NumberOfDispenses2 > 5)
        {
          NumberOfDispenses3 = NumberOfDispenses2 - 5;
          NumberOfDispenses2 = 5;
        }
        AspVolume_Ethanol1 = 200 * NumberOfDispenses1;
        AspVolume_Ethanol2 = 200 * NumberOfDispenses2;
        AspVolume_Ethanol3 = 200 * NumberOfDispenses3;
      }
    }
    if(0){
      Trace ("Number of Aspirations:  ", NumberOfAspirations);
      Trace ("Number of Columns for the first set of dispenses:  ", NumberOfDispenses1);
      Trace ("Number of Columns for the second set of dispenses:  ", NumberOfDispenses2);
      Trace ("Number of Columns for the third set of dispenses:  ", NumberOfDispenses3);
      Trace ("Aspiration volume for the first set of dispenses:  ", AspVolume_Ethanol1);
      Trace ("Aspiration volume for the second set of dispenses:  ", AspVolume_Ethanol2);
      Trace ("Aspiration volume for the third set of dispenses:  ", AspVolume_Ethanol3);
    }
    Util2::Debug::TraceArray(Translate("Number of Dispenses per Aspiration"), arr_dispenses);
    int_TotalDispenseRounds=arr_dispenses.GetSize();
    {
      loopCounter4 = 0;
      while (
         (seq_DispensePosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_TipsToUse1000ul, 1);
        loopCounter4 = loopCounter4 + 1;
        if (loopCounter4 > int_TotalDispenseRounds)
        {
          break;
        }
        MixCycles = 0;
        NumberOfDispenses=arr_dispenses.GetAt(loopCounter4-1);
        VolumeToAspirate = NumberOfDispenses * var_VolEtOH;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        if (loopCounter4 == 1)
        {
          if(0){
            MixCycles = 1;
          }
        }
        MECC::TraceComment(Translate("Need to determine if there is enough liquid in the tub for the next aspiration step. "));
        Trace (">>> Expected ethanol volume in tub:  ", var_TrackingEthanolVolume);
        if (var_TrackingEthanolVolume <= 0)
        {
          MECC::TraceComment(Translate("At the start of a run, or if going to a new or refilled tub, the volume is unknown, so we have to measure it:"));
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ret_MeasuredVol_Ch1 = HSLML_STAR::MeasureContainerVolume2(ML_STAR, seq_AspirationPosition, 0, Translate("10000000"), 0, 0, 0);
          Vol_Ch1 = HSLML_STAR::GetContainerVolume(1);
          var_TrackingEthanolVolume = Vol_Ch1;
          SimOn = HSLML_STAR::IsSimulatorMode(ML_STAR);
          if (SimOn == 1)
          {
            var_TrackingEthanolVolume = 12;
          }
          Trace (">>> After the cLLD check, the ethanol volume in tub is:  ", var_TrackingEthanolVolume);
        }
        VolumeToAspirate_8channels_uL = VolumeToAspirate * 8;
        VolumeToAspirate_8channels_mL = VolumeToAspirate_8channels_uL / (1000 * 1.0);
        VolAsp8ch_mL_inclDeadVol = VolumeToAspirate_8channels_mL + 2;
        Trace (">>> Next step needs this volume in tube (mL), inclulding dead volume:  ", VolAsp8ch_mL_inclDeadVol);
        if (VolAsp8ch_mL_inclDeadVol > var_TrackingEthanolVolume)
        {
          MECC::TraceComment(Translate("***** Insufficient volume of ethanol in tub.  Go to next tub, if available. *****"));
          var_TrackingEthanolVolume = 0;
          ret_PositionsEthanol = SeqGetTotal(seq_AspirationPosition);
          if (ret_PositionsEthanol >= 16)
          {
            Pointer_EthanolSequence = seq_AspirationPosition.GetCurrentPosition();
            if (Pointer_EthanolSequence <= 9)
            {
              SeqIncrement(seq_AspirationPosition, 8);
              MECC::TraceComment(Translate("***** Sequence incremented.  Going to next tub. Need to measure volume in tub. *****"));
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              ret_MeasuredVol_Ch1 = HSLML_STAR::MeasureContainerVolume2(ML_STAR, seq_AspirationPosition, 0, Translate("10000000"), 0, 0, 0);
              Vol_Ch1 = HSLML_STAR::GetContainerVolume(1);
              var_TrackingEthanolVolume = Vol_Ch1;
              SimOn = HSLML_STAR::IsSimulatorMode(ML_STAR);
              if (SimOn == 1)
              {
                var_TrackingEthanolVolume = 12;
              }
              Trace ("After the cLLD check, the ethanol volume in tub is:  ", var_TrackingEthanolVolume);
              if (VolAsp8ch_mL_inclDeadVol > var_TrackingEthanolVolume)
              {
                MECC::TraceComment(Translate("***** INADEQUATE VOLUME IN NEW TUB.  ASPIRATE STEP WILL LIKELY RESULT IN ERROR, REQUIRING USER INTERVENTION.  *****"));
              }
            }
            else
            {
              MECC::TraceComment(Translate("***** Sequence not incremented.  No other tubs available.  *****\n***** ASPIRATE STEP WILL LIKELY RESULT IN ERROR, REQUIRING USER INTERVENTION. *****"));
            }
          }
          else
          {
            MECC::TraceComment(Translate("***** Sequence not incremented.  No other tubs available.  *****\n***** ASPIRATE STEP WILL LIKELY RESULT IN ERROR, REQUIRING USER INTERVENTION. *****"));
          }
        }
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        var_TrackingEthanolVolume = var_TrackingEthanolVolume - VolumeToAspirate_8channels_mL;
        Trace ("New, calculated ethanol volume in tub:  ", var_TrackingEthanolVolume);
        {
          for(loopCounter3 = 0; loopCounter3 < NumberOfDispenses;)
          {
            loopCounter3 = loopCounter3 + 1;
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
        }
        if(0){
          if (loopCounter4 == 1)
          {
            if( 0 == Incubate30sec.SetTimer(Time_Incubate30sec) )
            {
                  MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse1000ul.SetMax(seq_TipsToUse1000ul.GetTotal());
      seq_DispensePosition.SetCurrentPosition(1);
    }
    if(0){
      STCC::ResetFilterSequences();
      STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
      {
        variable _FilterIdsArray_3[];
        variable _ColumnIdsArray_3[];
        variable _ColumnNamesArray_3[];
        variable _ExperimentsArray_3[];
        _FilterIdsArray_3.SetSize(0);
        _ColumnNamesArray_3.SetSize(14);
        _ColumnIdsArray_3.SetSize(14);
        _ColumnNamesArray_3.SetAt(0, "RecordId");
        _ColumnIdsArray_3.SetAt(0, 0);
        _ColumnNamesArray_3.SetAt(1, "TRackBC");
        _ColumnIdsArray_3.SetAt(1, 1);
        _ColumnNamesArray_3.SetAt(2, "TLabwareId");
        _ColumnIdsArray_3.SetAt(2, 2);
        _ColumnNamesArray_3.SetAt(3, "TPositionId");
        _ColumnIdsArray_3.SetAt(3, 3);
        _ColumnNamesArray_3.SetAt(4, "TPositionBC");
        _ColumnIdsArray_3.SetAt(4, 4);
        _ColumnNamesArray_3.SetAt(5, "TStatusSummary");
        _ColumnIdsArray_3.SetAt(5, 5);
        _ColumnNamesArray_3.SetAt(6, "TSumStateDescription");
        _ColumnIdsArray_3.SetAt(6, 6);
        _ColumnNamesArray_3.SetAt(7, "TVolume");
        _ColumnIdsArray_3.SetAt(7, 7);
        _ColumnNamesArray_3.SetAt(8, "SRackBC");
        _ColumnIdsArray_3.SetAt(8, 8);
        _ColumnNamesArray_3.SetAt(9, "SLabwareId");
        _ColumnIdsArray_3.SetAt(9, 9);
        _ColumnNamesArray_3.SetAt(10, "SPositionId");
        _ColumnIdsArray_3.SetAt(10, 10);
        _ColumnNamesArray_3.SetAt(11, "SPositionBC");
        _ColumnIdsArray_3.SetAt(11, 11);
        _ColumnNamesArray_3.SetAt(12, "ActionDateTime");
        _ColumnIdsArray_3.SetAt(12, 12);
        _ColumnNamesArray_3.SetAt(13, "UserName");
        _ColumnIdsArray_3.SetAt(13, 13);
        _ExperimentsArray_3.SetSize(0);
        STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_3, 0, _ColumnIdsArray_3, _ColumnNamesArray_3, _ExperimentsArray_3, "Ethanol_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
      }
    }
    seq_DispensePosition.SetCurrentPosition(1);
    if(0){
      if( 0 == Incubate30sec.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      ActualIncubationDuration = Incubate30sec.GetElapsedTime();
      Trace ("***** Actual incubation time (expected minimum 30 seconds for first column of wells):  ", ActualIncubationDuration);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_Ethanol <<<<<<<<<<"));
  }

  function MultiDispense_Reagent( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_TipsToUse1000ul, sequence & seq_AspirationPosition, sequence seq_DispensePosition, variable var_LiquidClass, variable & var_TrackingReagentlVolume, variable var_VolReagent, variable var_DispenseHeight ) void {
    private variable Columns_Remaining;
    private variable ret_PositionsEthanol;
    private variable VolumeToAspirate_8channels_mL;
    private variable NumberOfCompleteColumns;
    private variable AspVolume_Ethanol1;
    private variable RemainingWells;
    private variable ret_MeasuredVol_Ch1;
    private variable AspVolume_Ethanol;
    private variable NumberOfColumns;
    private variable VolAsp8ch_mL_inclDeadVol;
    private variable NumberOfDispenses1;
    private variable MaxNumberOfDispenses;
    private variable MixCycles;
    private variable VolumeToAspirate;
    private variable Vol_Ch1;
    private variable int_TotalDispenseRounds;
    private variable Pointer_EthanolSequence;
    private variable VolumeToAspirate_8channels_uL;
    private variable loopCounter3;
    private variable loopCounter4;
    private variable NumberOfDispenses;
    private variable SimOn;
    private variable NumberOfAspirations;
    private variable arr_dispenses[];
    private variable var_TrackingEthanolVolume;
    MoveRightArmOutOfWay(ML_STAR);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  MultiDispense_Reagent <<<<<<<<<<"));
    arr_dispenses.SetSize(0);
    NumberOfCompleteColumns = var_NumberOfSamples / 8;
    RemainingWells = var_NumberOfSamples % 8;
    Trace ("Number of Complete Columns in Destination Plate:  ", NumberOfCompleteColumns);
    Trace ("Number of Wells in Last, Incomplete Column:  ", RemainingWells);
    if (RemainingWells > 0)
    {
      NumberOfColumns = NumberOfCompleteColumns + 1;
    }
    else
    {
      NumberOfColumns = NumberOfCompleteColumns;
    }
    AspVolume_Ethanol = var_VolReagent * NumberOfColumns;
    Trace ("Required Total Volume for Ethanol, Per Row, Max = ", AspVolume_Ethanol);
    if (AspVolume_Ethanol <= 1000)
    {
      NumberOfAspirations = 1;
      NumberOfDispenses1 = NumberOfColumns;
      AspVolume_Ethanol1 = AspVolume_Ethanol;
      arr_dispenses.AddAsLast(NumberOfDispenses1);
    }
    else
    {
      MaxNumberOfDispenses = 1000 / var_VolReagent;
      MaxNumberOfDispenses = StrConcat2(MaxNumberOfDispenses, Translate(""));
      MaxNumberOfDispenses = StrIVal(MaxNumberOfDispenses);
      Columns_Remaining = NumberOfColumns;
      {
        NumberOfAspirations = 0;
        while (Columns_Remaining > 0)
        {
          NumberOfAspirations = NumberOfAspirations + 1;
          NumberOfDispenses = MaxNumberOfDispenses;
          if (Columns_Remaining < MaxNumberOfDispenses)
          {
            NumberOfDispenses = Columns_Remaining;
          }
          arr_dispenses.AddAsLast(NumberOfDispenses);
          Columns_Remaining = Columns_Remaining - NumberOfDispenses;
        }
      }
    }
    Util2::Debug::TraceArray(Translate("Number of Dispenses per Aspiration"), arr_dispenses);
    int_TotalDispenseRounds=arr_dispenses.GetSize();
    {
      loopCounter4 = 0;
      while (
         (seq_DispensePosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_TipsToUse1000ul, 1);
        loopCounter4 = loopCounter4 + 1;
        if (loopCounter4 > int_TotalDispenseRounds)
        {
          break;
        }
        MixCycles = 0;
        NumberOfDispenses=arr_dispenses.GetAt(loopCounter4-1);
        VolumeToAspirate = NumberOfDispenses * var_VolReagent;
        if (loopCounter4 == 1)
        {
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        }
        if (loopCounter4 == 1)
        {
          if(0){
            MixCycles = 1;
          }
        }
        MECC::TraceComment(Translate("Need to determine if there is enough liquid in the tub for the next aspiration step. "));
        Trace (">>> Expected ethanol volume in tub:  ", var_TrackingReagentlVolume);
        if (var_TrackingEthanolVolume <= 0)
        {
          MECC::TraceComment(Translate("At the start of a run, or if going to a new or refilled tub, the volume is unknown, so we have to measure it:"));
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ret_MeasuredVol_Ch1 = HSLML_STAR::MeasureContainerVolume2(ML_STAR, seq_AspirationPosition, 0, Translate("10000000"), 0, 0, 0);
          Vol_Ch1 = HSLML_STAR::GetContainerVolume(1);
          var_TrackingEthanolVolume = Vol_Ch1;
          SimOn = HSLML_STAR::IsSimulatorMode(ML_STAR);
          if (SimOn == 1)
          {
            var_TrackingReagentlVolume = 12;
          }
          Trace (">>> After the cLLD check, the ethanol volume in tub is:  ", var_TrackingEthanolVolume);
        }
        VolumeToAspirate_8channels_uL = VolumeToAspirate * 8;
        VolumeToAspirate_8channels_mL = VolumeToAspirate_8channels_uL / (1000 * 1.0);
        VolAsp8ch_mL_inclDeadVol = VolumeToAspirate_8channels_mL + 2;
        Trace (">>> Next step needs this volume in tube (mL), inclulding dead volume:  ", VolAsp8ch_mL_inclDeadVol);
        if (VolAsp8ch_mL_inclDeadVol > var_TrackingReagentlVolume)
        {
          MECC::TraceComment(Translate("***** Insufficient volume of ethanol in tub.  Go to next tub, if available. *****"));
          var_TrackingReagentlVolume = 0;
          ret_PositionsEthanol = SeqGetTotal(seq_AspirationPosition);
          if (ret_PositionsEthanol >= 16)
          {
            Pointer_EthanolSequence = seq_AspirationPosition.GetCurrentPosition();
            if (Pointer_EthanolSequence <= 9)
            {
              SeqIncrement(seq_AspirationPosition, 8);
              MECC::TraceComment(Translate("***** Sequence incremented.  Going to next tub. Need to measure volume in tub. *****"));
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              ret_MeasuredVol_Ch1 = HSLML_STAR::MeasureContainerVolume2(ML_STAR, seq_AspirationPosition, 0, Translate("10000000"), 0, 0, 0);
              Vol_Ch1 = HSLML_STAR::GetContainerVolume(1);
              var_TrackingReagentlVolume = Vol_Ch1;
              SimOn = HSLML_STAR::IsSimulatorMode(ML_STAR);
              if (SimOn == 1)
              {
                var_TrackingReagentlVolume = 12;
              }
              Trace ("After the cLLD check, the ethanol volume in tub is:  ", var_TrackingReagentlVolume);
              if (VolAsp8ch_mL_inclDeadVol > var_TrackingReagentlVolume)
              {
                MECC::TraceComment(Translate("***** INADEQUATE VOLUME IN NEW TUB.  ASPIRATE STEP WILL LIKELY RESULT IN ERROR, REQUIRING USER INTERVENTION.  *****"));
              }
            }
            else
            {
              MECC::TraceComment(Translate("***** Sequence not incremented.  No other tubs available.  *****\n***** ASPIRATE STEP WILL LIKELY RESULT IN ERROR, REQUIRING USER INTERVENTION. *****"));
            }
          }
          else
          {
            MECC::TraceComment(Translate("***** Sequence not incremented.  No other tubs available.  *****\n***** ASPIRATE STEP WILL LIKELY RESULT IN ERROR, REQUIRING USER INTERVENTION. *****"));
          }
        }
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        var_TrackingReagentlVolume = var_TrackingReagentlVolume - VolumeToAspirate_8channels_mL;
        Trace ("New, calculated ethanol volume in tub:  ", var_TrackingReagentlVolume);
        {
          for(loopCounter3 = 0; loopCounter3 < NumberOfDispenses;)
          {
            loopCounter3 = loopCounter3 + 1;
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
        }
        if (
           (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse1000ul.SetMax(seq_TipsToUse1000ul.GetTotal());
      seq_DispensePosition.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    seq_DispensePosition.SetCurrentPosition(1);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  MultiDispense_Reagent <<<<<<<<<<"));
  }
} // library namespace
