#pragma once
#include "HSLMthLib.hsl"
#include "HSLStrLib.hsl"
#include "VirtualLabware.hsl"
#include "HSLSeqLib.hsl"
#include "HSLML_STARLib.hsl"
#include "HSLTrcLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"
#include "HSLSTCCLib.hs_"

namespace NIST_TRUSEQNANO_PROCESSES {
  variable NumberOfCompleteColumns;
  variable RemainingWells;
  function Add_AdaptersViaDAP( device & ML_STAR, sequence & seq_Tips50ul, sequence & seq_DAP, sequence & seq_ALP, variable & arr_Index1Positions[], variable & arr_Index2Positions[], variable & arr_ALPpositions[] ) void ;
  function Add_AdaptersViaVials( device & ML_STAR, sequence & seq_Tips50, sequence & seq_Adapters, sequence & seq_ALP, variable var_NumberOfIndexTypes, variable & arr_Index1Positions[], variable & arr_Index2Positions[], variable & arr_ALPpositions[] ) void ;
  function Add_AmpureSingle( device & ML_STAR, sequence & seq_AmpureBeads, sequence & seq_Destination, sequence & seq_Tips, variable var_NumberSamples, variable var_BeadVolumePerWell, variable var_LLD_On, variable var_BeadStep ) void ;
  function Add_EPM( device & ML_STAR, sequence & seq_TipsToUse, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_VolumeToTransfer, variable var_AspirationHeight, variable var_DispenseHeight ) void ;
  function Add_Ethanol( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_TipsToUse1000ul, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_LiquidClassEthanol, variable & var_TrackingEthanolVolume, variable var_SkipAllTimers, variable var_str_EmailAdress ) void ;
  function Add_RSB( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse, variable var_VolPerSampleWell, variable var_TouchOff, variable var_RetractHeight ) void ;
  function Add_ReagentFromVial( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse50ul, variable var_VolPerSampleWell, variable var_LiquidClass50F, variable var_RetractHeight ) void ;
  private function Adjust_Sequence( sequence & iSeq_To_Adjust, variable iNumPositions, sequence & oSeq_Adjusted ) void ;
  private function ErrorHandling_TipPickup( device & ML_STAR, sequence & seq_TipsToUse ) void ;
  function MoveHSP( device & ML_STAR, sequence & seq_HSP_StartingPosition, sequence & seq_HSP_Destination, variable var_TrackToReadBC, variable var_ParkAfterMove, variable var_TransportDevice, sequence & seq_CORE_Grippers ) void ;
  function MoveMIDI( device & ML_STAR, sequence & seq_MIDI_Source, sequence & seq_MIDI_Destination, variable var_TrackToReadBC, variable var_Side, variable var_ParkAfterMove, variable var_TransportDevice, sequence & seq_CORE_Grippers ) void ;
  private function Move_HSP_wCOREgrippers( device & ML_STAR, sequence & seq_HSP_StartingPosition, sequence & seq_HSP_Destination, sequence seq_CORE_Grippers, variable var_TrackToReadBC, variable var_ParkAfterMove ) void ;
  private function Move_MIDI_wCOREgrippers( device & ML_STAR, sequence & seq_MIDI_Source, sequence & seq_MIDI_Destination, sequence seq_CORE_Grippers, variable var_TrackToReadBC, variable var_ParkAfterMove ) void ;
  function Normalize( device & ML_STAR, variable var_NormalizationFile, sequence & seq_Buffer, sequence & seq_SourcePlate, sequence & seq_DestinationPlate, sequence & seq_SampleTips, sequence & seq_BufferTips, variable var_LC_Buffer, variable var_LC_Sample, sequence & seq_PlateSeqForJustBuffer, sequence & seq_PoolingPlate ) void ;
  function Pool( device & ML_STAR, sequence & seq_NormPlate, sequence & seq_PoolingPlate, sequence & seq_Tips50ul, variable var_LC_Pooling, variable var_cLLDSetting, variable var_Height, variable & var_NormalizationFile ) void ;
  function Read_NormFile( device & ML_STAR, variable var_NormalizationFile, variable & var_TotalBufferVolume, variable & var_NumberOfSamples ) void ;
  function Remove_ResidualEtOH( device & ML_STAR, sequence & seq_TipsToUse50ul, sequence & seq_AspirationPosition ) void ;
  function Transfer_PlateToPlate( device & ML_STAR, sequence & seq_TipsToUse, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_VolumeToTransfer, variable var_LiquidClass, variable var_AspirationHeight, variable var_DispenseHeight ) void ;
  function Transfer_PlatetoWaste( device & ML_STAR, sequence & seq_TipsToUse300ul, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_VolumeToTransfer, variable var_LiquidClass ) void ;
  private function _VersionInfo(  ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  private function _VersionInfo(  ) void {
  }

  function Transfer_PlatetoWaste( device & ML_STAR, sequence & seq_TipsToUse300ul, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_VolumeToTransfer, variable var_LiquidClass ) void {
    private variable loopCounter1;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Transfer_PlatetoWaste <<<<<<<<<<"));
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
    {
      loopCounter1 = 0;
      while (
         (seq_AspirationPosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_TipsToUse300ul, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_1 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_1 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse300ul);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_AspirationPosition.GetCurrentPosition() > 0 && seq_AspirationPosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse300ul.SetMax(seq_TipsToUse300ul.GetTotal());
      seq_AspirationPosition.SetCurrentPosition(1);
      seq_DispensePosition.SetCurrentPosition(1);
    }
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Transfer_PlatetoWaste <<<<<<<<<<"));
  }

  function Add_AmpureSingle( device & ML_STAR, sequence & seq_AmpureBeads, sequence & seq_Destination, sequence & seq_Tips, variable var_NumberSamples, variable var_BeadVolumePerWell, variable var_LLD_On, variable var_BeadStep ) void {
    private variable MixVolume_Beads;
    private variable MixCycles_Beads;
    private variable loopCounter2;
    private variable FixedHt_Dispense;
    private variable LC_Beads;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_AmpureSingle <<<<<<<<<<"));
    Trace ("Volume of Sample Purification Beads per well:  ", var_BeadVolumePerWell);
    if (var_LLD_On == 0)
    {
      MECC::TraceComment(Translate("*** cLLD off for the dispense ***"));
      FixedHt_Dispense = 0.2;
    }
    else
    {
      MECC::TraceComment(Translate("*** cLLD on for the dispense ***"));
      FixedHt_Dispense = 0;
    }
    MECC::TraceComment(Translate("********** Fill plate with AMPure XP Beads ..........."));
    {
      loopCounter2 = 0;
      while (
         (seq_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AmpureBeads, 1, seq_Destination, 1, seq_Tips, 1);
        loopCounter2 = loopCounter2 + 1;
        MixVolume_Beads = 300;
        if (loopCounter2 == 1)
        {
          MixCycles_Beads = 10;
        }
        else
        {
          MixCycles_Beads = 3;
        }
        onerror goto errLabel_2 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_2 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_Tips);
        }   /* end if from skip handler if no error */
        if (loopCounter2 == 1)
        {
          LC_Beads = Translate("Nano_SVF_AmpureBeads_SurfaceEmpty_FastMix");
        }
        else
        {
          LC_Beads = Translate("Nano_SVF_AmpureBeads_SurfaceEmpty_Subsequent");
        }
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_Destination.GetCurrentPosition() > 0 && seq_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AmpureBeads.SetMax(seq_AmpureBeads.GetTotal());
      seq_Destination.SetMax(seq_Destination.GetTotal());
      seq_Tips.SetMax(seq_Tips.GetTotal());
      seq_AmpureBeads.SetCurrentPosition(1);
      seq_Destination.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("******** Create mapping files ********"));
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AmpureBeads);
    {
      variable _FilterIdsArray_3[];
      variable _ColumnIdsArray_3[];
      variable _ColumnNamesArray_3[];
      variable _ExperimentsArray_3[];
      _FilterIdsArray_3.SetSize(1);
      _ColumnNamesArray_3.SetSize(10);
      _ColumnIdsArray_3.SetSize(10);
      _FilterIdsArray_3.SetAt(0, 10);
      _ColumnNamesArray_3.SetAt(0, "TRackBC");
      _ColumnIdsArray_3.SetAt(0, 1);
      _ColumnNamesArray_3.SetAt(1, "TLabwareId");
      _ColumnIdsArray_3.SetAt(1, 2);
      _ColumnNamesArray_3.SetAt(2, "TPositionId");
      _ColumnIdsArray_3.SetAt(2, 3);
      _ColumnNamesArray_3.SetAt(3, "TStatusSummary");
      _ColumnIdsArray_3.SetAt(3, 5);
      _ColumnNamesArray_3.SetAt(4, "TSumStateDescription");
      _ColumnIdsArray_3.SetAt(4, 6);
      _ColumnNamesArray_3.SetAt(5, "SRackBC");
      _ColumnIdsArray_3.SetAt(5, 8);
      _ColumnNamesArray_3.SetAt(6, "SLabwareId");
      _ColumnIdsArray_3.SetAt(6, 9);
      _ColumnNamesArray_3.SetAt(7, "SPositionId");
      _ColumnIdsArray_3.SetAt(7, 10);
      _ColumnNamesArray_3.SetAt(8, "SPositionBC");
      _ColumnIdsArray_3.SetAt(8, 11);
      _ColumnNamesArray_3.SetAt(9, "ActionDateTime");
      _ColumnIdsArray_3.SetAt(9, 12);
      _ExperimentsArray_3.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_Destination, 4, _FilterIdsArray_3, 0, _ColumnIdsArray_3, _ColumnNamesArray_3, _ExperimentsArray_3, "<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_AmpureSingle <<<<<<<<<<"));
  }

  function Add_RSB( device & ML_STAR, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse, variable var_VolPerSampleWell, variable var_TouchOff, variable var_RetractHeight ) void {
    private variable loopCounter1;
    private variable DispenseAboveTouch;
    private variable FixedHeight;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_RSB <<<<<<<<<<"));
    if (var_TouchOff == 1)
    {
      FixedHeight = 0;
      DispenseAboveTouch = 1;
    }
    else
    {
      FixedHeight = 0.1;
      DispenseAboveTouch = 0;
    }
    {
      loopCounter1 = 0;
      while (
         (seq_DispensePosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_TipsToUse, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_4 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_4 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse);
        }   /* end if from skip handler if no error */
        if (var_VolPerSampleWell <= 50)
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        else
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse.SetMax(seq_TipsToUse.GetTotal());
      seq_AspirationPosition.SetCurrentPosition(1);
      seq_DispensePosition.SetCurrentPosition(1);
      seq_TipsToUse.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("******** Create mapping files ********"));
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_5[];
      variable _ColumnIdsArray_5[];
      variable _ColumnNamesArray_5[];
      variable _ExperimentsArray_5[];
      _FilterIdsArray_5.SetSize(1);
      _ColumnNamesArray_5.SetSize(10);
      _ColumnIdsArray_5.SetSize(10);
      _FilterIdsArray_5.SetAt(0, 10);
      _ColumnNamesArray_5.SetAt(0, "TRackBC");
      _ColumnIdsArray_5.SetAt(0, 1);
      _ColumnNamesArray_5.SetAt(1, "TLabwareId");
      _ColumnIdsArray_5.SetAt(1, 2);
      _ColumnNamesArray_5.SetAt(2, "TPositionId");
      _ColumnIdsArray_5.SetAt(2, 3);
      _ColumnNamesArray_5.SetAt(3, "TStatusSummary");
      _ColumnIdsArray_5.SetAt(3, 5);
      _ColumnNamesArray_5.SetAt(4, "TSumStateDescription");
      _ColumnIdsArray_5.SetAt(4, 6);
      _ColumnNamesArray_5.SetAt(5, "SRackBC");
      _ColumnIdsArray_5.SetAt(5, 8);
      _ColumnNamesArray_5.SetAt(6, "SLabwareId");
      _ColumnIdsArray_5.SetAt(6, 9);
      _ColumnNamesArray_5.SetAt(7, "SPositionId");
      _ColumnIdsArray_5.SetAt(7, 10);
      _ColumnNamesArray_5.SetAt(8, "SPositionBC");
      _ColumnIdsArray_5.SetAt(8, 11);
      _ColumnNamesArray_5.SetAt(9, "ActionDateTime");
      _ColumnIdsArray_5.SetAt(9, 12);
      _ExperimentsArray_5.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 4, _FilterIdsArray_5, 0, _ColumnIdsArray_5, _ColumnNamesArray_5, _ExperimentsArray_5, "<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_RSB <<<<<<<<<<"));
  }

  function Add_EPM( device & ML_STAR, sequence & seq_TipsToUse, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_VolumeToTransfer, variable var_AspirationHeight, variable var_DispenseHeight ) void {
    private variable Asp_Submerge;
    private variable loopCounter1;
    private variable Asp_cLLD_sensitivity;
    private variable number_of_Targets;
    private sequence seq_AspirationPosition_adjusted;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_EPM <<<<<<<<<<"));
    if (var_AspirationHeight == 0)
    {
      MECC::TraceComment(Translate("*** Aspirating using cLLD ***"));
      Asp_cLLD_sensitivity = 1;
      Asp_Submerge = 0.5;
    }
    else
    {
      MECC::TraceComment(Translate("*** Aspirating from a fixed height ***"));
      Asp_cLLD_sensitivity = 0;
      Asp_Submerge = 0;
      Trace ("Aspiration ht:  ", var_AspirationHeight);
    }
    Trace ("Dispense ht:  ", var_DispenseHeight);
    number_of_Targets = SeqGetTotal(seq_DispensePosition);
    Adjust_Sequence(seq_AspirationPosition, number_of_Targets, seq_AspirationPosition_adjusted);
    {
      loopCounter1 = 0;
      while (
         (seq_DispensePosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_DispensePosition, 1, seq_TipsToUse, 1, seq_AspirationPosition_adjusted, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_6 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_6 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse.SetMax(seq_TipsToUse.GetTotal());
      seq_AspirationPosition_adjusted.SetMax(seq_AspirationPosition_adjusted.GetTotal());
      seq_DispensePosition.SetCurrentPosition(1);
      seq_AspirationPosition_adjusted.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("******** Create mapping files ********"));
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_7[];
      variable _ColumnIdsArray_7[];
      variable _ColumnNamesArray_7[];
      variable _ExperimentsArray_7[];
      _FilterIdsArray_7.SetSize(1);
      _ColumnNamesArray_7.SetSize(10);
      _ColumnIdsArray_7.SetSize(10);
      _FilterIdsArray_7.SetAt(0, 10);
      _ColumnNamesArray_7.SetAt(0, "TRackBC");
      _ColumnIdsArray_7.SetAt(0, 1);
      _ColumnNamesArray_7.SetAt(1, "TLabwareId");
      _ColumnIdsArray_7.SetAt(1, 2);
      _ColumnNamesArray_7.SetAt(2, "TPositionId");
      _ColumnIdsArray_7.SetAt(2, 3);
      _ColumnNamesArray_7.SetAt(3, "TStatusSummary");
      _ColumnIdsArray_7.SetAt(3, 5);
      _ColumnNamesArray_7.SetAt(4, "TSumStateDescription");
      _ColumnIdsArray_7.SetAt(4, 6);
      _ColumnNamesArray_7.SetAt(5, "SRackBC");
      _ColumnIdsArray_7.SetAt(5, 8);
      _ColumnNamesArray_7.SetAt(6, "SLabwareId");
      _ColumnIdsArray_7.SetAt(6, 9);
      _ColumnNamesArray_7.SetAt(7, "SPositionId");
      _ColumnIdsArray_7.SetAt(7, 10);
      _ColumnNamesArray_7.SetAt(8, "SPositionBC");
      _ColumnIdsArray_7.SetAt(8, 11);
      _ColumnNamesArray_7.SetAt(9, "ActionDateTime");
      _ColumnIdsArray_7.SetAt(9, 12);
      _ExperimentsArray_7.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 4, _FilterIdsArray_7, 0, _ColumnIdsArray_7, _ColumnNamesArray_7, _ExperimentsArray_7, "<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_EPM <<<<<<<<<<"));
  }

  function MoveHSP( device & ML_STAR, sequence & seq_HSP_StartingPosition, sequence & seq_HSP_Destination, variable var_TrackToReadBC, variable var_ParkAfterMove, variable var_TransportDevice, sequence & seq_CORE_Grippers ) void {
    if (var_TransportDevice == 1)
    {
      MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  MoveHSP <<<<<<<<<"));
      ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
      if (var_TrackToReadBC > 0)
      {
        ML_STAR._3ADE1686_D394_4a08_918C_20E3EDA3CC69("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"); // ReadPlateBarcode
      }
      ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
      if (var_ParkAfterMove == 1)
      {
        ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
      }
      MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  MoveHSP <<<<<<<<<<"));
    }
    else
    {
      Move_HSP_wCOREgrippers(ML_STAR, seq_HSP_StartingPosition, seq_HSP_Destination, seq_CORE_Grippers, var_TrackToReadBC, var_ParkAfterMove);
    }
  }

  function MoveMIDI( device & ML_STAR, sequence & seq_MIDI_Source, sequence & seq_MIDI_Destination, variable var_TrackToReadBC, variable var_Side, variable var_ParkAfterMove, variable var_TransportDevice, sequence & seq_CORE_Grippers ) void {
    private variable GripWidth;
    private variable GripInverse;
    private variable GripOpening;
    if (var_TransportDevice == 1)
    {
      MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  MoveMIDI <<<<<<<<<<"));
      if (var_Side == 0)
      {
        MECC::TraceComment(Translate("***** Gripping on small side *****"));
        GripWidth = 80;
        GripOpening = 87;
        GripInverse = 1;
      }
      else
      {
        MECC::TraceComment(Translate("***** Gripping on large side *****"));
        GripWidth = 123.7;
        GripOpening = 130.2;
        GripInverse = 0;
      }
      ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
      if (var_TrackToReadBC > 0)
      {
        ML_STAR._3ADE1686_D394_4a08_918C_20E3EDA3CC69("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"); // ReadPlateBarcode
      }
      ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
      if (var_ParkAfterMove == 1)
      {
        ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
      }
      MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  MoveMIDI <<<<<<<<<<"));
    }
    else
    {
      Move_MIDI_wCOREgrippers(ML_STAR, seq_MIDI_Source, seq_MIDI_Destination, seq_CORE_Grippers, var_TrackToReadBC, var_ParkAfterMove);
    }
  }

  function Add_ReagentFromVial( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, sequence & seq_TipsToUse50ul, variable var_VolPerSampleWell, variable var_LiquidClass50F, variable var_RetractHeight ) void {
    private variable PositionID_Vial_1;
    private variable PositionID_Vial_2;
    private variable NumberSamplesMoreThan48;
    private variable loopCounter1;
    private variable loopCounter2;
    private variable LabwareID_Vial;
    private variable NumberSamplesUpTo48;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_ReagentFromVial <<<<<<<<<<"));
    if (var_NumberOfSamples > 48)
    {
      NumberSamplesMoreThan48 = var_NumberOfSamples - 48;
      NumberSamplesUpTo48 = var_NumberOfSamples - (2 * NumberSamplesMoreThan48);
    }
    else
    {
      NumberSamplesMoreThan48 = 0;
      NumberSamplesUpTo48 = var_NumberOfSamples;
    }
    LabwareID_Vial = SeqGetLabwareId(seq_AspirationPosition);
    PositionID_Vial_1 = SeqGetPositionId(seq_AspirationPosition);
    SeqIncrement(seq_AspirationPosition, 1);
    PositionID_Vial_2 = SeqGetPositionId(seq_AspirationPosition);
    SeqRemoveAll(seq_AspirationPosition);
    {
      for(loopCounter2 = 0; loopCounter2 < NumberSamplesMoreThan48;)
      {
        loopCounter2 = loopCounter2 + 1;
        SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
        SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_2);
      }
    }
    {
      for(loopCounter2 = 0; loopCounter2 < NumberSamplesUpTo48;)
      {
        loopCounter2 = loopCounter2 + 1;
        SeqAdd(seq_AspirationPosition, LabwareID_Vial, PositionID_Vial_1);
      }
    }
    seq_AspirationPosition.SetCurrentPosition(1);
    MECC::TraceComment(Translate("********** Now pipetting reagent to destination plate"));
    {
      loopCounter1 = 0;
      while (
         (seq_DispensePosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_DispensePosition, 1, seq_TipsToUse50ul, 1, seq_AspirationPosition, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_8 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_8 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse50ul);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse50ul.SetMax(seq_TipsToUse50ul.GetTotal());
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetCurrentPosition(1);
      seq_AspirationPosition.SetCurrentPosition(1);
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_9[];
      variable _ColumnIdsArray_9[];
      variable _ColumnNamesArray_9[];
      variable _ExperimentsArray_9[];
      _FilterIdsArray_9.SetSize(0);
      _ColumnNamesArray_9.SetSize(14);
      _ColumnIdsArray_9.SetSize(14);
      _ColumnNamesArray_9.SetAt(0, "RecordId");
      _ColumnIdsArray_9.SetAt(0, 0);
      _ColumnNamesArray_9.SetAt(1, "TRackBC");
      _ColumnIdsArray_9.SetAt(1, 1);
      _ColumnNamesArray_9.SetAt(2, "TLabwareId");
      _ColumnIdsArray_9.SetAt(2, 2);
      _ColumnNamesArray_9.SetAt(3, "TPositionId");
      _ColumnIdsArray_9.SetAt(3, 3);
      _ColumnNamesArray_9.SetAt(4, "TPositionBC");
      _ColumnIdsArray_9.SetAt(4, 4);
      _ColumnNamesArray_9.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_9.SetAt(5, 5);
      _ColumnNamesArray_9.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_9.SetAt(6, 6);
      _ColumnNamesArray_9.SetAt(7, "TVolume");
      _ColumnIdsArray_9.SetAt(7, 7);
      _ColumnNamesArray_9.SetAt(8, "SRackBC");
      _ColumnIdsArray_9.SetAt(8, 8);
      _ColumnNamesArray_9.SetAt(9, "SLabwareId");
      _ColumnIdsArray_9.SetAt(9, 9);
      _ColumnNamesArray_9.SetAt(10, "SPositionId");
      _ColumnIdsArray_9.SetAt(10, 10);
      _ColumnNamesArray_9.SetAt(11, "SPositionBC");
      _ColumnIdsArray_9.SetAt(11, 11);
      _ColumnNamesArray_9.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_9.SetAt(12, 12);
      _ColumnNamesArray_9.SetAt(13, "UserName");
      _ColumnIdsArray_9.SetAt(13, 13);
      _ExperimentsArray_9.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_9, 0, _ColumnIdsArray_9, _ColumnNamesArray_9, _ExperimentsArray_9, "Reagent_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_ReagentFromVial <<<<<<<<<<"));
  }

  function Normalize( device & ML_STAR, variable var_NormalizationFile, sequence & seq_Buffer, sequence & seq_SourcePlate, sequence & seq_DestinationPlate, sequence & seq_SampleTips, sequence & seq_BufferTips, variable var_LC_Buffer, variable var_LC_Sample, sequence & seq_PlateSeqForJustBuffer, sequence & seq_PoolingPlate ) void {
    private variable LinesInTheFile;
    private variable LabwareID_PoolingPlate;
    private variable BufferVolume;
    private variable WellID_Source;
    private variable WellID_Pool;
    private variable LabwareID_SourcePlate;
    private variable TheLabwareID;
    private variable ExtraVolume;
    private variable loopCounter1;
    private variable SampleConc;
    private variable loopCounter2;
    private variable DispVolume;
    private variable LabwareID_DestinationPlate;
    private variable ArrayIndexCounter;
    private file file1;
    private variable arr_NormalizationVolumes[];
    private variable arr_NormVolDispense[];
    private variable arr_NormVolDispenseExtra[];
    private dialog dialogHandle1;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Normalize <<<<<<<<<<"));
    LabwareID_SourcePlate = SeqGetLabwareId(seq_SourcePlate);
    LabwareID_DestinationPlate = SeqGetLabwareId(seq_DestinationPlate);
    LabwareID_PoolingPlate = SeqGetLabwareId(seq_PoolingPlate);
    SeqRemoveAll(seq_SourcePlate);
    SeqRemoveAll(seq_DestinationPlate);
    SeqRemoveAll(seq_PoolingPlate);
    TrcTrace(Translate("Normalization File:  "), var_NormalizationFile);
    file1.AddField("SourceWell", WellID_Source, hslString, 255);
    file1.AddField("nM", SampleConc, hslFloat);
    file1.AddField("PoolWell", WellID_Pool, hslString, 255);
    if( 0 == file1.Open(var_NormalizationFile + " " + "Sheet1$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, var_NormalizationFile, "HxMetEdCompCmd");
    }
    arr_NormalizationVolumes.SetSize(0);
    arr_NormVolDispense.SetSize(0);
    {
      LinesInTheFile = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        LinesInTheFile = LinesInTheFile + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        BufferVolume = SampleConc - 10;
        BufferVolume = MthRound(BufferVolume, 1);
        if (BufferVolume < 0)
        {
          dialogHandle1.SetOutput(Translate("Sample in well "), WellID_Source, Translate(" has a concentration less than 10nM."), "\n", Translate("No diluent will be added to this sample."));
          dialogHandle1.ShowOutput(Translate("Concentration less than expected!"), hslOKOnly | hslQuestion | hslDefButton1, hslInfinite);
          BufferVolume = 0;
        }
        Trace ("Source well ", WellID_Source, ", Concentration (nM) = ", SampleConc, ", so Buffer Volume is ", BufferVolume, "ul.  Corresponding pool well:  ", WellID_Pool);
        if (BufferVolume > 300)
        {
          BufferVolume = 300;
        }
        DispVolume = BufferVolume + 0;
        arr_NormalizationVolumes.AddAsLast(BufferVolume);
        arr_NormVolDispense.AddAsLast(DispVolume);
        SeqAdd(seq_SourcePlate, LabwareID_SourcePlate, WellID_Source);
        SeqAdd(seq_DestinationPlate, LabwareID_DestinationPlate, WellID_Source);
        SeqAdd(seq_PoolingPlate, LabwareID_PoolingPlate, WellID_Pool);
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    seq_SourcePlate.SetCurrentPosition(1);
    seq_DestinationPlate.SetCurrentPosition(1);
    seq_PoolingPlate.SetCurrentPosition(1);
    MECC::TraceComment(Translate("************* Pipette the sample to the plate...."));
    {
      loopCounter2 = 0;
      while (
         (seq_SourcePlate.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_Buffer, 1, seq_DestinationPlate, 1, seq_SourcePlate, 1, seq_SampleTips, 1);
        loopCounter2 = loopCounter2 + 1;
        onerror goto errLabel_10 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_10 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_SampleTips);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_SourcePlate.GetCurrentPosition() > 0 && seq_SourcePlate.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_Buffer.SetMax(seq_Buffer.GetTotal());
      seq_DestinationPlate.SetMax(seq_DestinationPlate.GetTotal());
      seq_SourcePlate.SetMax(seq_SourcePlate.GetTotal());
      seq_SampleTips.SetMax(seq_SampleTips.GetTotal());
      seq_Buffer.SetCurrentPosition(1);
      seq_DestinationPlate.SetCurrentPosition(1);
      seq_SourcePlate.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("************* Pipette the buffer to the plate...."));
    ArrayIndexCounter = 1;
    {
      loopCounter2 = 0;
      while (
         (seq_DestinationPlate.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_Buffer, 1, seq_BufferTips, 1, seq_DestinationPlate, 1);
        loopCounter2 = loopCounter2 + 1;
        onerror goto errLabel_11 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_11 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_BufferTips);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        ArrayIndexCounter = ArrayIndexCounter + 8;
        if (
           (seq_DestinationPlate.GetCurrentPosition() > 0 && seq_DestinationPlate.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_Buffer.SetMax(seq_Buffer.GetTotal());
      seq_BufferTips.SetMax(seq_BufferTips.GetTotal());
      seq_DestinationPlate.SetMax(seq_DestinationPlate.GetTotal());
      seq_Buffer.SetCurrentPosition(1);
      seq_DestinationPlate.SetCurrentPosition(1);
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_Buffer);
    STCC::AddFilterSequence(ML_STAR, seq_SourcePlate);
    {
      variable _FilterIdsArray_12[];
      variable _ColumnIdsArray_12[];
      variable _ColumnNamesArray_12[];
      variable _ExperimentsArray_12[];
      _FilterIdsArray_12.SetSize(0);
      _ColumnNamesArray_12.SetSize(14);
      _ColumnIdsArray_12.SetSize(14);
      _ColumnNamesArray_12.SetAt(0, "RecordId");
      _ColumnIdsArray_12.SetAt(0, 0);
      _ColumnNamesArray_12.SetAt(1, "TRackBC");
      _ColumnIdsArray_12.SetAt(1, 1);
      _ColumnNamesArray_12.SetAt(2, "TLabwareId");
      _ColumnIdsArray_12.SetAt(2, 2);
      _ColumnNamesArray_12.SetAt(3, "TPositionId");
      _ColumnIdsArray_12.SetAt(3, 3);
      _ColumnNamesArray_12.SetAt(4, "TPositionBC");
      _ColumnIdsArray_12.SetAt(4, 4);
      _ColumnNamesArray_12.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_12.SetAt(5, 5);
      _ColumnNamesArray_12.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_12.SetAt(6, 6);
      _ColumnNamesArray_12.SetAt(7, "TVolume");
      _ColumnIdsArray_12.SetAt(7, 7);
      _ColumnNamesArray_12.SetAt(8, "SRackBC");
      _ColumnIdsArray_12.SetAt(8, 8);
      _ColumnNamesArray_12.SetAt(9, "SLabwareId");
      _ColumnIdsArray_12.SetAt(9, 9);
      _ColumnNamesArray_12.SetAt(10, "SPositionId");
      _ColumnIdsArray_12.SetAt(10, 10);
      _ColumnNamesArray_12.SetAt(11, "SPositionBC");
      _ColumnIdsArray_12.SetAt(11, 11);
      _ColumnNamesArray_12.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_12.SetAt(12, 12);
      _ColumnNamesArray_12.SetAt(13, "UserName");
      _ColumnIdsArray_12.SetAt(13, 13);
      _ExperimentsArray_12.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DestinationPlate, 3, _FilterIdsArray_12, 0, _ColumnIdsArray_12, _ColumnNamesArray_12, _ExperimentsArray_12, "Normalization_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate("************* Pipette extra buffer to the plate (and mix) when the required buffer volume is greater than 290ul...."));
    TheLabwareID = SeqGetLabwareId(seq_DestinationPlate);
    SeqRemoveAll(seq_PlateSeqForJustBuffer);
    arr_NormVolDispenseExtra.SetSize(0);
    file1.AddField("SourceWell", WellID_Source, hslString, 255);
    file1.AddField("nM", SampleConc, hslFloat);
    if( 0 == file1.Open(var_NormalizationFile + " " + "Sheet1$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, var_NormalizationFile, "HxMetEdCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        BufferVolume = SampleConc - 10;
        BufferVolume = MthRound(BufferVolume, 1);
        if (BufferVolume > 300)
        {
          ExtraVolume = BufferVolume - 300;
          if (ExtraVolume > 300)
          {
            Trace ("WARNING!!! For well ", WellID_Source, ", in the normalization plate, ", ExtraVolume, "ul extra buffer is required, but only 300 will be pipetted.");
            ExtraVolume = 300;
          }
          else
          {
            Trace ("For well ", WellID_Source, ", in the normalization plate, ", ExtraVolume, "ul extra buffer is required.");
          }
          arr_NormVolDispenseExtra.AddAsLast(ExtraVolume);
          SeqAdd(seq_PlateSeqForJustBuffer, TheLabwareID, WellID_Source);
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    seq_PlateSeqForJustBuffer.SetCurrentPosition(1);
    ArrayIndexCounter = 1;
    {
      loopCounter2 = 0;
      while (
         (seq_PlateSeqForJustBuffer.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_Buffer, 1, seq_BufferTips, 1, seq_PlateSeqForJustBuffer, 1);
        loopCounter2 = loopCounter2 + 1;
        onerror goto errLabel_13 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_13 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_BufferTips);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        ArrayIndexCounter = ArrayIndexCounter + 8;
        if (
           (seq_PlateSeqForJustBuffer.GetCurrentPosition() > 0 && seq_PlateSeqForJustBuffer.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_Buffer.SetMax(seq_Buffer.GetTotal());
      seq_BufferTips.SetMax(seq_BufferTips.GetTotal());
      seq_PlateSeqForJustBuffer.SetMax(seq_PlateSeqForJustBuffer.GetTotal());
      seq_Buffer.SetCurrentPosition(1);
      seq_PlateSeqForJustBuffer.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Normalize <<<<<<<<<<"));
  }

  function Pool( device & ML_STAR, sequence & seq_NormPlate, sequence & seq_PoolingPlate, sequence & seq_Tips50ul, variable var_LC_Pooling, variable var_cLLDSetting, variable var_Height, variable & var_NormalizationFile ) void {
    private variable CheckWell;
    private variable WellID_Pool;
    private variable WellsInPoolingPlate;
    private variable RecordsInArray;
    private variable NumberOfSamples;
    private variable SamplesPerPool;
    private variable loopCounter1;
    private variable loopCounter2;
    private variable loopCounter3;
    private variable Found;
    private variable VolumePerSample;
    private file file1;
    private variable arr_Pools[];
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Pool <<<<<<<<<<"));
    MECC::TraceComment(Translate("*********** Trace the Pooling plate sequence *********"));
    TrcTraceSequence(seq_PoolingPlate);
    NumberOfSamples = SeqGetTotal(seq_PoolingPlate);
    arr_Pools.SetSize(0);
    TrcTrace(Translate("Normalization File:  "), var_NormalizationFile);
    file1.AddField("PoolWell", WellID_Pool, hslString, 255);
    if( 0 == file1.Open(var_NormalizationFile + " " + "Sheet1$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, var_NormalizationFile, "HxMetEdCompCmd");
    }
    if( 0 == file1.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    arr_Pools.AddAsLast(WellID_Pool);
    {
      loopCounter2 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter2 = loopCounter2 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        RecordsInArray=arr_Pools.GetSize();
        {
          for(loopCounter3 = 0; loopCounter3 < RecordsInArray;)
          {
            loopCounter3 = loopCounter3 + 1;
            CheckWell=arr_Pools.GetAt(loopCounter3-1);
            if (CheckWell == WellID_Pool)
            {
              Found = 1;
              break;
            }
          }
        }
        if (Found == 0)
        {
          arr_Pools.AddAsLast(WellID_Pool);
        }
        Found = 0;
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    WellsInPoolingPlate=arr_Pools.GetSize();
    SamplesPerPool = NumberOfSamples / (WellsInPoolingPlate * 1.0);
    if (SamplesPerPool <= 24)
    {
      VolumePerSample = 10;
    }
    else
    {
      VolumePerSample = 5;
    }
    Trace ("Number of Samples = ", NumberOfSamples);
    Trace ("Number of Pools = ", WellsInPoolingPlate);
    Trace ("Samples per pool = ", SamplesPerPool);
    Trace ("Volume to transfer per sample = ", VolumePerSample);
    {
      loopCounter1 = 0;
      while (
         (seq_NormPlate.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_NormPlate, 1, seq_PoolingPlate, 1, seq_Tips50ul, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_14 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_14 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_Tips50ul);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_NormPlate.GetCurrentPosition() > 0 && seq_NormPlate.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_NormPlate.SetMax(seq_NormPlate.GetTotal());
      seq_PoolingPlate.SetMax(seq_PoolingPlate.GetTotal());
      seq_Tips50ul.SetMax(seq_Tips50ul.GetTotal());
      seq_NormPlate.SetCurrentPosition(1);
      seq_PoolingPlate.SetCurrentPosition(1);
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_NormPlate);
    {
      variable _FilterIdsArray_15[];
      variable _ColumnIdsArray_15[];
      variable _ColumnNamesArray_15[];
      variable _ExperimentsArray_15[];
      _FilterIdsArray_15.SetSize(0);
      _ColumnNamesArray_15.SetSize(14);
      _ColumnIdsArray_15.SetSize(14);
      _ColumnNamesArray_15.SetAt(0, "RecordId");
      _ColumnIdsArray_15.SetAt(0, 0);
      _ColumnNamesArray_15.SetAt(1, "TRackBC");
      _ColumnIdsArray_15.SetAt(1, 1);
      _ColumnNamesArray_15.SetAt(2, "TLabwareId");
      _ColumnIdsArray_15.SetAt(2, 2);
      _ColumnNamesArray_15.SetAt(3, "TPositionId");
      _ColumnIdsArray_15.SetAt(3, 3);
      _ColumnNamesArray_15.SetAt(4, "TPositionBC");
      _ColumnIdsArray_15.SetAt(4, 4);
      _ColumnNamesArray_15.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_15.SetAt(5, 5);
      _ColumnNamesArray_15.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_15.SetAt(6, 6);
      _ColumnNamesArray_15.SetAt(7, "TVolume");
      _ColumnIdsArray_15.SetAt(7, 7);
      _ColumnNamesArray_15.SetAt(8, "SRackBC");
      _ColumnIdsArray_15.SetAt(8, 8);
      _ColumnNamesArray_15.SetAt(9, "SLabwareId");
      _ColumnIdsArray_15.SetAt(9, 9);
      _ColumnNamesArray_15.SetAt(10, "SPositionId");
      _ColumnIdsArray_15.SetAt(10, 10);
      _ColumnNamesArray_15.SetAt(11, "SPositionBC");
      _ColumnIdsArray_15.SetAt(11, 11);
      _ColumnNamesArray_15.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_15.SetAt(12, 12);
      _ColumnNamesArray_15.SetAt(13, "UserName");
      _ColumnIdsArray_15.SetAt(13, 13);
      _ExperimentsArray_15.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_PoolingPlate, 3, _FilterIdsArray_15, 0, _ColumnIdsArray_15, _ColumnNamesArray_15, _ExperimentsArray_15, "Pool_Map_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Pool <<<<<<<<<<"));
  }

  function Read_NormFile( device & ML_STAR, variable var_NormalizationFile, variable & var_TotalBufferVolume, variable & var_NumberOfSamples ) void {
    private dialog dialogHandle_16;
    private variable LinesInTheFile;
    private variable BufferVolume;
    private variable WellID_Pool;
    private variable WellID_Source;
    private variable Answer_WarningVolume;
    private variable SampleConc;
    private variable var_TotalBufferVolume_uL;
    private file file1;
    var_TotalBufferVolume = 0;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Read_NormFile <<<<<<<<<<"));
    MECC::TraceComment(Translate("Get the values from the Normalization File.  \nAssumptions:\nThe File must be a comma separated txt or csv file. \nThe file must have at least 2 columns, headed by \"SourceWell\" and \"Volume\" (buffer volume)\nThe volume of buffer required per well must be less than or equal to 600."));
    file1.AddField("SourceWell", WellID_Source, hslString, 255);
    file1.AddField("nM", SampleConc, hslFloat);
    file1.AddField("PoolWell", WellID_Pool, hslString, 255);
    if( 0 == file1.Open(var_NormalizationFile + " " + "Sheet1$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, var_NormalizationFile, "HxMetEdCompCmd");
    }
    var_TotalBufferVolume_uL = 0;
    {
      LinesInTheFile = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        LinesInTheFile = LinesInTheFile + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        BufferVolume = SampleConc - 10;
        BufferVolume = MthRound(BufferVolume, 1);
        Trace ("Source well ", WellID_Source, ", Concentration (nM) = ", SampleConc, ", so Buffer Volume is ", BufferVolume, "ul.");
        var_TotalBufferVolume_uL = var_TotalBufferVolume_uL + BufferVolume;
        if (BufferVolume > 600)
        {
          dialogHandle_16.SetOutput(Translate("Well:  "), WellID_Source, Translate("\n\nThis sample requires a diluent volume greater than 600ul."), Translate("\n\nClick Yes to continue, and the system will pipette 600ul buffer for this sample.  Or click No to Abort."));
          Answer_WarningVolume = dialogHandle_16.ShowOutput(Translate("Warning!"), hslYesNo | hslExclamation | hslDefButton2, hslInfinite);
          if (Answer_WarningVolume == 6)
          {
            BufferVolume = 600;
            Trace ("WARNING!  For source well ", WellID_Source, ", ", BufferVolume, "ul total buffer will be pipetted.");
          }
          else
          {
            abort;
          }
        }
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    var_NumberOfSamples = LinesInTheFile;
    var_TotalBufferVolume = var_TotalBufferVolume_uL / 1000;
    var_TotalBufferVolume = MthCeiling(var_TotalBufferVolume);
    Trace ("Total Buffer Volume (mL) = ", var_TotalBufferVolume);
    Trace ("Number of samples = ", var_NumberOfSamples);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Read_NormFile <<<<<<<<<<"));
  }

  function Add_AdaptersViaVials( device & ML_STAR, sequence & seq_Tips50, sequence & seq_Adapters, sequence & seq_ALP, variable var_NumberOfIndexTypes, variable & arr_Index1Positions[], variable & arr_Index2Positions[], variable & arr_ALPpositions[] ) void {
    private variable Index1_Pos;
    private variable Index2_Pos;
    private variable LabwareID_ALP;
    private variable Size_arrayALP;
    private variable WellID;
    private variable LabwareID_Adapters;
    private variable loopCounter2;
    private variable loopCounter3;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_AdaptersViaVials <<<<<<<<<<"));
    LabwareID_Adapters = SeqGetLabwareId(seq_Adapters);
    LabwareID_ALP = SeqGetLabwareId(seq_ALP);
    SeqRemoveAll(seq_Adapters);
    SeqRemoveAll(seq_ALP);
    Size_arrayALP=arr_ALPpositions.GetSize();
    {
      for(loopCounter2 = 0; loopCounter2 < Size_arrayALP;)
      {
        loopCounter2 = loopCounter2 + 1;
        WellID=arr_ALPpositions.GetAt(loopCounter2-1);
        SeqAdd(seq_ALP, LabwareID_ALP, WellID);
        Index1_Pos=arr_Index1Positions.GetAt(loopCounter2-1);
        SeqAdd(seq_Adapters, LabwareID_Adapters, Index1_Pos);
      }
    }
    if (var_NumberOfIndexTypes == 2)
    {
      {
        for(loopCounter2 = 0; loopCounter2 < Size_arrayALP;)
        {
          loopCounter2 = loopCounter2 + 1;
          Index2_Pos=arr_Index2Positions.GetAt(loopCounter2-1);
          SeqAdd(seq_Adapters, LabwareID_Adapters, Index2_Pos);
        }
      }
    }
    seq_Adapters.SetCurrentPosition(1);
    seq_ALP.SetCurrentPosition(1);
    MECC::TraceComment(Translate("********** Fill the ALP with the Index1 adapters **************"));
    {
      loopCounter3 = 0;
      while (
         (seq_ALP.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_ALP, 1, seq_Adapters, 1, seq_Tips50, 1);
        loopCounter3 = loopCounter3 + 1;
        onerror goto errLabel_17 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_17 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_Tips50);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_ALP.GetCurrentPosition() > 0 && seq_ALP.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_ALP.SetMax(seq_ALP.GetTotal());
      seq_Adapters.SetMax(seq_Adapters.GetTotal());
      seq_Tips50.SetMax(seq_Tips50.GetTotal());
      seq_ALP.SetCurrentPosition(1);
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_Adapters);
    {
      variable _FilterIdsArray_18[];
      variable _ColumnIdsArray_18[];
      variable _ColumnNamesArray_18[];
      variable _ExperimentsArray_18[];
      _FilterIdsArray_18.SetSize(0);
      _ColumnNamesArray_18.SetSize(14);
      _ColumnIdsArray_18.SetSize(14);
      _ColumnNamesArray_18.SetAt(0, "RecordId");
      _ColumnIdsArray_18.SetAt(0, 0);
      _ColumnNamesArray_18.SetAt(1, "TRackBC");
      _ColumnIdsArray_18.SetAt(1, 1);
      _ColumnNamesArray_18.SetAt(2, "TLabwareId");
      _ColumnIdsArray_18.SetAt(2, 2);
      _ColumnNamesArray_18.SetAt(3, "TPositionId");
      _ColumnIdsArray_18.SetAt(3, 3);
      _ColumnNamesArray_18.SetAt(4, "TPositionBC");
      _ColumnIdsArray_18.SetAt(4, 4);
      _ColumnNamesArray_18.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_18.SetAt(5, 5);
      _ColumnNamesArray_18.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_18.SetAt(6, 6);
      _ColumnNamesArray_18.SetAt(7, "TVolume");
      _ColumnIdsArray_18.SetAt(7, 7);
      _ColumnNamesArray_18.SetAt(8, "SRackBC");
      _ColumnIdsArray_18.SetAt(8, 8);
      _ColumnNamesArray_18.SetAt(9, "SLabwareId");
      _ColumnIdsArray_18.SetAt(9, 9);
      _ColumnNamesArray_18.SetAt(10, "SPositionId");
      _ColumnIdsArray_18.SetAt(10, 10);
      _ColumnNamesArray_18.SetAt(11, "SPositionBC");
      _ColumnIdsArray_18.SetAt(11, 11);
      _ColumnNamesArray_18.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_18.SetAt(12, 12);
      _ColumnNamesArray_18.SetAt(13, "UserName");
      _ColumnIdsArray_18.SetAt(13, 13);
      _ExperimentsArray_18.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_ALP, 3, _FilterIdsArray_18, 0, _ColumnIdsArray_18, _ColumnNamesArray_18, _ExperimentsArray_18, "Adapters1_to_ALP_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    if (var_NumberOfIndexTypes == 2)
    {
      MECC::TraceComment(Translate("**************** Fill the ALP with the Index2 adapters, if any **********************"));
      {
        loopCounter3 = 0;
        while (
           (seq_ALP.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, seq_ALP, 1, seq_Adapters, 1, seq_Tips50, 1);
          loopCounter3 = loopCounter3 + 1;
          onerror goto errLabel_19 ;
          err.Clear();
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          errLabel_19 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            ErrorHandling_TipPickup(ML_STAR, seq_Tips50);
          }   /* end if from skip handler if no error */
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (seq_ALP.GetCurrentPosition() > 0 && seq_ALP.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        seq_ALP.SetMax(seq_ALP.GetTotal());
        seq_Adapters.SetMax(seq_Adapters.GetTotal());
        seq_Tips50.SetMax(seq_Tips50.GetTotal());
        seq_ALP.SetCurrentPosition(1);
        seq_Adapters.SetCurrentPosition(1);
      }
      STCC::ResetFilterSequences();
      STCC::AddFilterSequence(ML_STAR, seq_Adapters);
      {
        variable _FilterIdsArray_20[];
        variable _ColumnIdsArray_20[];
        variable _ColumnNamesArray_20[];
        variable _ExperimentsArray_20[];
        _FilterIdsArray_20.SetSize(0);
        _ColumnNamesArray_20.SetSize(14);
        _ColumnIdsArray_20.SetSize(14);
        _ColumnNamesArray_20.SetAt(0, "RecordId");
        _ColumnIdsArray_20.SetAt(0, 0);
        _ColumnNamesArray_20.SetAt(1, "TRackBC");
        _ColumnIdsArray_20.SetAt(1, 1);
        _ColumnNamesArray_20.SetAt(2, "TLabwareId");
        _ColumnIdsArray_20.SetAt(2, 2);
        _ColumnNamesArray_20.SetAt(3, "TPositionId");
        _ColumnIdsArray_20.SetAt(3, 3);
        _ColumnNamesArray_20.SetAt(4, "TPositionBC");
        _ColumnIdsArray_20.SetAt(4, 4);
        _ColumnNamesArray_20.SetAt(5, "TStatusSummary");
        _ColumnIdsArray_20.SetAt(5, 5);
        _ColumnNamesArray_20.SetAt(6, "TSumStateDescription");
        _ColumnIdsArray_20.SetAt(6, 6);
        _ColumnNamesArray_20.SetAt(7, "TVolume");
        _ColumnIdsArray_20.SetAt(7, 7);
        _ColumnNamesArray_20.SetAt(8, "SRackBC");
        _ColumnIdsArray_20.SetAt(8, 8);
        _ColumnNamesArray_20.SetAt(9, "SLabwareId");
        _ColumnIdsArray_20.SetAt(9, 9);
        _ColumnNamesArray_20.SetAt(10, "SPositionId");
        _ColumnIdsArray_20.SetAt(10, 10);
        _ColumnNamesArray_20.SetAt(11, "SPositionBC");
        _ColumnIdsArray_20.SetAt(11, 11);
        _ColumnNamesArray_20.SetAt(12, "ActionDateTime");
        _ColumnIdsArray_20.SetAt(12, 12);
        _ColumnNamesArray_20.SetAt(13, "UserName");
        _ColumnIdsArray_20.SetAt(13, 13);
        _ExperimentsArray_20.SetSize(0);
        STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_ALP, 3, _FilterIdsArray_20, 0, _ColumnIdsArray_20, _ColumnNamesArray_20, _ExperimentsArray_20, "Adapters2_to_ALP_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
      }
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_AdaptersViaVials <<<<<<<<<<"));
  }

  private function Adjust_Sequence( sequence & iSeq_To_Adjust, variable iNumPositions, sequence & oSeq_Adjusted ) void {
    private variable LabID;
    private variable TotalPositions;
    private variable PosID;
    private variable loopCounter1;
    private sequence iSeq_To_Adjust_copy;
    SeqCopySequence(iSeq_To_Adjust_copy, iSeq_To_Adjust);
    LabID = SeqGetLabwareId(iSeq_To_Adjust);
    SeqRemoveAll(iSeq_To_Adjust_copy);
    TotalPositions = SeqGetTotal(iSeq_To_Adjust);
    {
      for(loopCounter1 = 0; loopCounter1 < iNumPositions;)
      {
        loopCounter1 = loopCounter1 + 1;
        PosID = SeqGetPositionId(iSeq_To_Adjust);
        SeqAdd(iSeq_To_Adjust_copy, LabID, PosID);
      }
    }
    SeqCopySequence(iSeq_To_Adjust, oSeq_Adjusted);
    oSeq_Adjusted.SetCurrentPosition(1);
  }

  function Add_Ethanol( device & ML_STAR, variable var_NumberOfSamples, sequence & seq_TipsToUse1000ul, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_LiquidClassEthanol, variable & var_TrackingEthanolVolume, variable var_SkipAllTimers, variable var_str_EmailAdress ) void {
    private variable ret_PositionsEthanol;
    private variable VolumeToAspirate_8channels_mL;
    private variable AspVolume_Ethanol1;
    private variable AspVolume_Ethanol2;
    private variable AspVolume_Ethanol;
    private variable ret_MeasuredVol_Ch1;
    private variable AspVolume_Ethanol3;
    private variable NumberOfColumns;
    private variable VolAsp8ch_mL_inclDeadVol;
    private variable NumberOfDispenses1;
    private variable MixCycles;
    private variable VolumeToAspirate;
    private variable NumberOfDispenses2;
    private variable ActualIncubationDuration;
    private variable NumberOfDispenses3;
    private variable Vol_Ch1;
    private variable VolumeToAspirate_8channels_uL;
    private variable Pointer_EthanolSequence;
    private variable loopCounter3;
    private variable loopCounter4;
    private variable NumberOfDispenses;
    private variable SimOn;
    private variable NumberOfAspirations;
    private timer Incubate30sec;
    private variable Timer_Incubate30sec;
    if (var_SkipAllTimers == 0)
    {
      Timer_Incubate30sec = 23;
    }
    else
    {
      Timer_Incubate30sec = 1;
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_Ethanol <<<<<<<<<<"));
    NumberOfCompleteColumns = var_NumberOfSamples / 8;
    RemainingWells = var_NumberOfSamples % 8;
    Trace ("Number of Complete Columns in Destination Plate:  ", NumberOfCompleteColumns);
    Trace ("Number of Wells in Last, Incomplete Column:  ", RemainingWells);
    if (RemainingWells > 0)
    {
      NumberOfColumns = NumberOfCompleteColumns + 1;
    }
    else
    {
      NumberOfColumns = NumberOfCompleteColumns;
    }
    AspVolume_Ethanol = 200 * NumberOfColumns;
    Trace ("Required Total Volume for Ethanol, Per Row, Max = ", AspVolume_Ethanol);
    if (AspVolume_Ethanol <= 1000)
    {
      NumberOfAspirations = 1;
      NumberOfDispenses1 = NumberOfColumns;
      AspVolume_Ethanol1 = AspVolume_Ethanol;
    }
    else
    {
      NumberOfAspirations = AspVolume_Ethanol / (1000 * 1.0);
      NumberOfAspirations = MthCeiling(NumberOfAspirations);
      NumberOfDispenses1 = 5;
      NumberOfDispenses2 = NumberOfColumns - NumberOfDispenses1;
      if (NumberOfDispenses2 > 5)
      {
        NumberOfDispenses3 = NumberOfDispenses2 - 5;
        NumberOfDispenses2 = 5;
      }
      AspVolume_Ethanol1 = 200 * NumberOfDispenses1;
      AspVolume_Ethanol2 = 200 * NumberOfDispenses2;
      AspVolume_Ethanol3 = 200 * NumberOfDispenses3;
    }
    Trace ("Number of Aspirations:  ", NumberOfAspirations);
    Trace ("Number of Columns for the first set of dispenses:  ", NumberOfDispenses1);
    Trace ("Number of Columns for the second set of dispenses:  ", NumberOfDispenses2);
    Trace ("Number of Columns for the third set of dispenses:  ", NumberOfDispenses3);
    Trace ("Aspiration volume for the first set of dispenses:  ", AspVolume_Ethanol1);
    Trace ("Aspiration volume for the second set of dispenses:  ", AspVolume_Ethanol2);
    Trace ("Aspiration volume for the third set of dispenses:  ", AspVolume_Ethanol3);
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
    {
      loopCounter4 = 0;
      while (
         (seq_DispensePosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_TipsToUse1000ul, 1);
        loopCounter4 = loopCounter4 + 1;
        if (loopCounter4 == 1)
        {
          onerror goto errLabel_21 ;
          err.Clear();
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          errLabel_21 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse1000ul);
          }   /* end if from skip handler if no error */
          VolumeToAspirate = AspVolume_Ethanol1;
          NumberOfDispenses = NumberOfDispenses1;
          MixCycles = 1;
        }
        if (loopCounter4 == 2)
        {
          VolumeToAspirate = AspVolume_Ethanol2;
          NumberOfDispenses = NumberOfDispenses2;
          MixCycles = 0;
        }
        if (loopCounter4 == 3)
        {
          VolumeToAspirate = AspVolume_Ethanol3;
          NumberOfDispenses = NumberOfDispenses3;
          MixCycles = 0;
        }
        MECC::TraceComment(Translate("Need to determine if there is enough liquid in the tub for the next aspiration step. "));
        Trace (">>> Expected ethanol volume in tub:  ", var_TrackingEthanolVolume);
        if (var_TrackingEthanolVolume <= 0)
        {
          MECC::TraceComment(Translate("At the start of a run, or if going to a new or refilled tub, the volume is unknown, so we have to measure it:"));
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ret_MeasuredVol_Ch1 = HSLML_STAR::MeasureContainerVolume2(ML_STAR, seq_AspirationPosition, 0, Translate("10000000"), 0, 0, 0);
          Vol_Ch1 = HSLML_STAR::GetContainerVolume(1);
          var_TrackingEthanolVolume = Vol_Ch1;
          SimOn = HSLML_STAR::IsSimulatorMode(ML_STAR);
          if (SimOn == 1)
          {
            var_TrackingEthanolVolume = 12;
          }
          Trace (">>> After the cLLD check, the ethanol volume in tub is:  ", var_TrackingEthanolVolume);
        }
        VolumeToAspirate_8channels_uL = VolumeToAspirate * 8;
        VolumeToAspirate_8channels_mL = VolumeToAspirate_8channels_uL / (1000 * 1.0);
        VolAsp8ch_mL_inclDeadVol = VolumeToAspirate_8channels_mL + 2;
        Trace (">>> Next step needs this volume in tube (mL), including dead volume:  ", VolAsp8ch_mL_inclDeadVol);
        if (VolAsp8ch_mL_inclDeadVol > var_TrackingEthanolVolume)
        {
          MECC::TraceComment(Translate("***** Insufficient volume of ethanol in tub.  Go to next tub, if available. *****"));
          var_TrackingEthanolVolume = 0;
          ret_PositionsEthanol = SeqGetTotal(seq_AspirationPosition);
          if (ret_PositionsEthanol >= 16)
          {
            Pointer_EthanolSequence = seq_AspirationPosition.GetCurrentPosition();
            if (Pointer_EthanolSequence <= 9)
            {
              SeqIncrement(seq_AspirationPosition, 8);
              MECC::TraceComment(Translate("***** Sequence incremented.  Going to next tub. Need to measure volume in tub. *****"));
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              ret_MeasuredVol_Ch1 = HSLML_STAR::MeasureContainerVolume2(ML_STAR, seq_AspirationPosition, 0, Translate("10000000"), 0, 0, 0);
              Vol_Ch1 = HSLML_STAR::GetContainerVolume(1);
              var_TrackingEthanolVolume = Vol_Ch1;
              SimOn = HSLML_STAR::IsSimulatorMode(ML_STAR);
              if (SimOn == 1)
              {
                var_TrackingEthanolVolume = 12;
              }
              Trace ("After the cLLD check, the ethanol volume in tub is:  ", var_TrackingEthanolVolume);
              if (VolAsp8ch_mL_inclDeadVol > var_TrackingEthanolVolume)
              {
                MECC::TraceComment(Translate("***** INADEQUATE VOLUME IN NEW TUB.  ASPIRATE STEP WILL LIKELY RESULT IN ERROR, REQUIRING USER INTERVENTION.  *****"));
              }
            }
            else
            {
              MECC::TraceComment(Translate("***** Sequence not incremented.  No other tubs available.  *****\n***** ASPIRATE STEP WILL LIKELY RESULT IN ERROR, REQUIRING USER INTERVENTION. *****"));
            }
          }
          else
          {
            MECC::TraceComment(Translate("***** Sequence not incremented.  No other tubs available.  *****\n***** ASPIRATE STEP WILL LIKELY RESULT IN ERROR, REQUIRING USER INTERVENTION. *****"));
          }
        }
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        var_TrackingEthanolVolume = var_TrackingEthanolVolume - VolumeToAspirate_8channels_mL;
        Trace ("New, calculated ethanol volume in tub:  ", var_TrackingEthanolVolume);
        {
          for(loopCounter3 = 0; loopCounter3 < NumberOfDispenses;)
          {
            loopCounter3 = loopCounter3 + 1;
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
        }
        if (loopCounter4 == 1)
        {
          if( 0 == Incubate30sec.SetTimer(Timer_Incubate30sec) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        if (
           (seq_DispensePosition.GetCurrentPosition() > 0 && seq_DispensePosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse1000ul.SetMax(seq_TipsToUse1000ul.GetTotal());
      seq_DispensePosition.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_22[];
      variable _ColumnIdsArray_22[];
      variable _ColumnNamesArray_22[];
      variable _ExperimentsArray_22[];
      _FilterIdsArray_22.SetSize(0);
      _ColumnNamesArray_22.SetSize(14);
      _ColumnIdsArray_22.SetSize(14);
      _ColumnNamesArray_22.SetAt(0, "RecordId");
      _ColumnIdsArray_22.SetAt(0, 0);
      _ColumnNamesArray_22.SetAt(1, "TRackBC");
      _ColumnIdsArray_22.SetAt(1, 1);
      _ColumnNamesArray_22.SetAt(2, "TLabwareId");
      _ColumnIdsArray_22.SetAt(2, 2);
      _ColumnNamesArray_22.SetAt(3, "TPositionId");
      _ColumnIdsArray_22.SetAt(3, 3);
      _ColumnNamesArray_22.SetAt(4, "TPositionBC");
      _ColumnIdsArray_22.SetAt(4, 4);
      _ColumnNamesArray_22.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_22.SetAt(5, 5);
      _ColumnNamesArray_22.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_22.SetAt(6, 6);
      _ColumnNamesArray_22.SetAt(7, "TVolume");
      _ColumnIdsArray_22.SetAt(7, 7);
      _ColumnNamesArray_22.SetAt(8, "SRackBC");
      _ColumnIdsArray_22.SetAt(8, 8);
      _ColumnNamesArray_22.SetAt(9, "SLabwareId");
      _ColumnIdsArray_22.SetAt(9, 9);
      _ColumnNamesArray_22.SetAt(10, "SPositionId");
      _ColumnIdsArray_22.SetAt(10, 10);
      _ColumnNamesArray_22.SetAt(11, "SPositionBC");
      _ColumnIdsArray_22.SetAt(11, 11);
      _ColumnNamesArray_22.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_22.SetAt(12, 12);
      _ColumnNamesArray_22.SetAt(13, "UserName");
      _ColumnIdsArray_22.SetAt(13, 13);
      _ExperimentsArray_22.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_22, 0, _ColumnIdsArray_22, _ColumnNamesArray_22, _ExperimentsArray_22, "Ethanol_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    seq_DispensePosition.SetCurrentPosition(1);
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    if( 0 == Incubate30sec.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    ActualIncubationDuration = Incubate30sec.GetElapsedTime();
    Trace ("***** Actual incubation time (expected minimum 30 seconds for first column of wells):  ", ActualIncubationDuration);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_Ethanol <<<<<<<<<<"));
  }

  function Remove_ResidualEtOH( device & ML_STAR, sequence & seq_TipsToUse50ul, sequence & seq_AspirationPosition ) void {
    private variable loopCounter1;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Remove_ResidualEtOH <<<<<<<<<<"));
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
    {
      loopCounter1 = 0;
      while (
         (seq_AspirationPosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_TipsToUse50ul, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_23 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_23 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse50ul);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_AspirationPosition.GetCurrentPosition() > 0 && seq_AspirationPosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_TipsToUse50ul.SetMax(seq_TipsToUse50ul.GetTotal());
      seq_AspirationPosition.SetCurrentPosition(1);
    }
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Remove_ResidualEtOH <<<<<<<<<<"));
  }

  function Transfer_PlateToPlate( device & ML_STAR, sequence & seq_TipsToUse, sequence & seq_AspirationPosition, sequence & seq_DispensePosition, variable var_VolumeToTransfer, variable var_LiquidClass, variable var_AspirationHeight, variable var_DispenseHeight ) void {
    private variable Asp_Submerge;
    private variable loopCounter1;
    private variable Asp_cLLD_sensitivity;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Transfer_PlateToPlate <<<<<<<<<<"));
    if (var_AspirationHeight == 0)
    {
      Asp_cLLD_sensitivity = 1;
      Asp_Submerge = 0.5;
    }
    else
    {
      Asp_cLLD_sensitivity = 0;
      Asp_Submerge = 0;
    }
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
    {
      loopCounter1 = 0;
      while (
         (seq_AspirationPosition.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_AspirationPosition, 1, seq_DispensePosition, 1, seq_TipsToUse, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_24 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_24 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_TipsToUse);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_AspirationPosition.GetCurrentPosition() > 0 && seq_AspirationPosition.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_AspirationPosition.SetMax(seq_AspirationPosition.GetTotal());
      seq_DispensePosition.SetMax(seq_DispensePosition.GetTotal());
      seq_TipsToUse.SetMax(seq_TipsToUse.GetTotal());
      seq_AspirationPosition.SetCurrentPosition(1);
      seq_DispensePosition.SetCurrentPosition(1);
    }
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_AspirationPosition);
    {
      variable _FilterIdsArray_25[];
      variable _ColumnIdsArray_25[];
      variable _ColumnNamesArray_25[];
      variable _ExperimentsArray_25[];
      _FilterIdsArray_25.SetSize(0);
      _ColumnNamesArray_25.SetSize(14);
      _ColumnIdsArray_25.SetSize(14);
      _ColumnNamesArray_25.SetAt(0, "RecordId");
      _ColumnIdsArray_25.SetAt(0, 0);
      _ColumnNamesArray_25.SetAt(1, "TRackBC");
      _ColumnIdsArray_25.SetAt(1, 1);
      _ColumnNamesArray_25.SetAt(2, "TLabwareId");
      _ColumnIdsArray_25.SetAt(2, 2);
      _ColumnNamesArray_25.SetAt(3, "TPositionId");
      _ColumnIdsArray_25.SetAt(3, 3);
      _ColumnNamesArray_25.SetAt(4, "TPositionBC");
      _ColumnIdsArray_25.SetAt(4, 4);
      _ColumnNamesArray_25.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_25.SetAt(5, 5);
      _ColumnNamesArray_25.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_25.SetAt(6, 6);
      _ColumnNamesArray_25.SetAt(7, "TVolume");
      _ColumnIdsArray_25.SetAt(7, 7);
      _ColumnNamesArray_25.SetAt(8, "SRackBC");
      _ColumnIdsArray_25.SetAt(8, 8);
      _ColumnNamesArray_25.SetAt(9, "SLabwareId");
      _ColumnIdsArray_25.SetAt(9, 9);
      _ColumnNamesArray_25.SetAt(10, "SPositionId");
      _ColumnIdsArray_25.SetAt(10, 10);
      _ColumnNamesArray_25.SetAt(11, "SPositionBC");
      _ColumnIdsArray_25.SetAt(11, 11);
      _ColumnNamesArray_25.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_25.SetAt(12, 12);
      _ColumnNamesArray_25.SetAt(13, "UserName");
      _ColumnIdsArray_25.SetAt(13, 13);
      _ExperimentsArray_25.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DispensePosition, 3, _FilterIdsArray_25, 0, _ColumnIdsArray_25, _ColumnNamesArray_25, _ExperimentsArray_25, "TransferPlateToPlate_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Transfer_PlateToPlate <<<<<<<<<<"));
  }

  function Add_AdaptersViaDAP( device & ML_STAR, sequence & seq_Tips50ul, sequence & seq_DAP, sequence & seq_ALP, variable & arr_Index1Positions[], variable & arr_Index2Positions[], variable & arr_ALPpositions[] ) void {
    private variable LabwareID_ALP;
    private variable Size_arrayALP;
    private variable WellID;
    private variable loopCounter1;
    private variable LabwareID_Adapters;
    private variable loopCounter2;
    private variable Index_Pos_DAP;
    private variable Index2_Pos_DAP_Row;
    private variable Index1_Pos_DAP_Column;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Add_AdaptersViaDAP <<<<<<<<<<"));
    LabwareID_Adapters = SeqGetLabwareId(seq_DAP);
    LabwareID_ALP = SeqGetLabwareId(seq_ALP);
    SeqRemoveAll(seq_DAP);
    SeqRemoveAll(seq_ALP);
    Size_arrayALP=arr_ALPpositions.GetSize();
    {
      for(loopCounter2 = 0; loopCounter2 < Size_arrayALP;)
      {
        loopCounter2 = loopCounter2 + 1;
        WellID=arr_ALPpositions.GetAt(loopCounter2-1);
        SeqAdd(seq_ALP, LabwareID_ALP, WellID);
        Index1_Pos_DAP_Column=arr_Index1Positions.GetAt(loopCounter2-1);
        Index2_Pos_DAP_Row=arr_Index2Positions.GetAt(loopCounter2-1);
        if (Index2_Pos_DAP_Row == "1")
        {
          Index2_Pos_DAP_Row = Translate("A");
        }
        if (Index2_Pos_DAP_Row == "2")
        {
          Index2_Pos_DAP_Row = Translate("B");
        }
        if (Index2_Pos_DAP_Row == "3")
        {
          Index2_Pos_DAP_Row = Translate("C");
        }
        if (Index2_Pos_DAP_Row == "4")
        {
          Index2_Pos_DAP_Row = Translate("D");
        }
        if (Index2_Pos_DAP_Row == "5")
        {
          Index2_Pos_DAP_Row = Translate("E");
        }
        if (Index2_Pos_DAP_Row == "6")
        {
          Index2_Pos_DAP_Row = Translate("F");
        }
        if (Index2_Pos_DAP_Row == "7")
        {
          Index2_Pos_DAP_Row = Translate("G");
        }
        if (Index2_Pos_DAP_Row == "8")
        {
          Index2_Pos_DAP_Row = Translate("H");
        }
        Index_Pos_DAP = Index2_Pos_DAP_Row + Index1_Pos_DAP_Column;
        SeqAdd(seq_DAP, LabwareID_Adapters, Index_Pos_DAP);
        Trace ("Index mixture in DAP well ", Index_Pos_DAP, " will go to ALP well ", WellID);
      }
    }
    seq_DAP.SetCurrentPosition(1);
    seq_ALP.SetCurrentPosition(1);
    {
      loopCounter1 = 0;
      while (
         (seq_ALP.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, seq_ALP, 1, seq_Tips50ul, 1, seq_DAP, 1);
        loopCounter1 = loopCounter1 + 1;
        onerror goto errLabel_26 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_26 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          ErrorHandling_TipPickup(ML_STAR, seq_Tips50ul);
        }   /* end if from skip handler if no error */
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (seq_ALP.GetCurrentPosition() > 0 && seq_ALP.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      seq_ALP.SetMax(seq_ALP.GetTotal());
      seq_Tips50ul.SetMax(seq_Tips50ul.GetTotal());
      seq_DAP.SetMax(seq_DAP.GetTotal());
      seq_ALP.SetCurrentPosition(1);
      seq_DAP.SetCurrentPosition(1);
    }
    STCC::ResetFilterSequences();
    STCC::AddFilterSequence(ML_STAR, seq_ALP);
    {
      variable _FilterIdsArray_27[];
      variable _ColumnIdsArray_27[];
      variable _ColumnNamesArray_27[];
      variable _ExperimentsArray_27[];
      _FilterIdsArray_27.SetSize(0);
      _ColumnNamesArray_27.SetSize(14);
      _ColumnIdsArray_27.SetSize(14);
      _ColumnNamesArray_27.SetAt(0, "RecordId");
      _ColumnIdsArray_27.SetAt(0, 0);
      _ColumnNamesArray_27.SetAt(1, "TRackBC");
      _ColumnIdsArray_27.SetAt(1, 1);
      _ColumnNamesArray_27.SetAt(2, "TLabwareId");
      _ColumnIdsArray_27.SetAt(2, 2);
      _ColumnNamesArray_27.SetAt(3, "TPositionId");
      _ColumnIdsArray_27.SetAt(3, 3);
      _ColumnNamesArray_27.SetAt(4, "TPositionBC");
      _ColumnIdsArray_27.SetAt(4, 4);
      _ColumnNamesArray_27.SetAt(5, "TStatusSummary");
      _ColumnIdsArray_27.SetAt(5, 5);
      _ColumnNamesArray_27.SetAt(6, "TSumStateDescription");
      _ColumnIdsArray_27.SetAt(6, 6);
      _ColumnNamesArray_27.SetAt(7, "TVolume");
      _ColumnIdsArray_27.SetAt(7, 7);
      _ColumnNamesArray_27.SetAt(8, "SRackBC");
      _ColumnIdsArray_27.SetAt(8, 8);
      _ColumnNamesArray_27.SetAt(9, "SLabwareId");
      _ColumnIdsArray_27.SetAt(9, 9);
      _ColumnNamesArray_27.SetAt(10, "SPositionId");
      _ColumnIdsArray_27.SetAt(10, 10);
      _ColumnNamesArray_27.SetAt(11, "SPositionBC");
      _ColumnIdsArray_27.SetAt(11, 11);
      _ColumnNamesArray_27.SetAt(12, "ActionDateTime");
      _ColumnIdsArray_27.SetAt(12, 12);
      _ColumnNamesArray_27.SetAt(13, "UserName");
      _ColumnIdsArray_27.SetAt(13, 13);
      _ExperimentsArray_27.SetSize(0);
      STCC::GenerateMappingFileV43Ex1(ML_STAR, seq_DAP, 3, _FilterIdsArray_27, 0, _ColumnIdsArray_27, _ColumnNamesArray_27, _ExperimentsArray_27, "DAP_to_ALP_<LabID>_<BC>_<No>.xls", 0, 0, "", 1);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Add_AdaptersViaDAP <<<<<<<<<<"));
  }

  private function Move_HSP_wCOREgrippers( device & ML_STAR, sequence & seq_HSP_StartingPosition, sequence & seq_HSP_Destination, sequence seq_CORE_Grippers, variable var_TrackToReadBC, variable var_ParkAfterMove ) void {
    private variable ret_SourceLabwareID;
    private variable ret_DestinationLabwareID;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod: Move_HSP_wCOREgrippers <<<<<<<<<"));
    MECC::TraceComment(Translate("Using CORE grippers for HSP movements"));
    ret_SourceLabwareID = SeqGetLabwareId(seq_HSP_StartingPosition);
    ret_SourceLabwareID = StrLeft(ret_SourceLabwareID, 15);
    ret_DestinationLabwareID = SeqGetLabwareId(seq_HSP_Destination);
    if (ret_SourceLabwareID == "Hardshell_Stack")
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, seq_HSP_StartingPosition, 0, 0, 54.5);
    }
    if (ret_DestinationLabwareID == "HSP_Waste")
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, seq_HSP_StartingPosition, -20, 0, 0);
      VIRTUALLABWARE::MoveSeq(ML_STAR, seq_HSP_Destination, -60, 0, 0);
    }
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    if (var_TrackToReadBC > 0)
    {
      ML_STAR._E59329BC_113D_451D_9468_F2327ECEE33E("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"); // ZSwapReadBarcode
    }
    if (var_ParkAfterMove == 1)
    {
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    }
    else
    {
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    }
    if (ret_DestinationLabwareID == "HSP_Waste")
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, seq_HSP_StartingPosition, 20, 0, 0);
      VIRTUALLABWARE::MoveSeq(ML_STAR, seq_HSP_Destination, 60, 0, 0);
    }
    if (ret_SourceLabwareID == "Hardshell_Stack")
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, seq_HSP_StartingPosition, 0, 0, -54.5);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Move_HSP_wCOREgrippers <<<<<<<<<<"));
  }

  private function Move_MIDI_wCOREgrippers( device & ML_STAR, sequence & seq_MIDI_Source, sequence & seq_MIDI_Destination, sequence seq_CORE_Grippers, variable var_TrackToReadBC, variable var_ParkAfterMove ) void {
    private variable GripWidth;
    private variable ret_DestinationLabwareID;
    private variable GripOpening;
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  Move_MIDI_wCOREgrippers <<<<<<<<<<"));
    MECC::TraceComment(Translate("Using CORE grippers for MIDI movements"));
    GripWidth = 79;
    GripOpening = 87;
    ret_DestinationLabwareID = SeqGetLabwareId(seq_MIDI_Destination);
    if (ret_DestinationLabwareID == "MIDI_Waste")
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, seq_MIDI_Source, -20, 0, 0);
      VIRTUALLABWARE::MoveSeq(ML_STAR, seq_MIDI_Destination, -60, 0, 8);
    }
    if (var_TrackToReadBC > 0)
    {
      ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      ML_STAR._E59329BC_113D_451D_9468_F2327ECEE33E("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"); // ZSwapReadBarcode
    }
    else
    {
      ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    }
    if (var_ParkAfterMove == 1)
    {
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    }
    else
    {
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    }
    if (ret_DestinationLabwareID == "MIDI_Waste")
    {
      VIRTUALLABWARE::MoveSeq(ML_STAR, seq_MIDI_Source, 20, 0, 0);
      VIRTUALLABWARE::MoveSeq(ML_STAR, seq_MIDI_Destination, 60, 0, -8);
    }
    MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  Move_MIDI_wCOREgrippers <<<<<<<<<<"));
  }

  private function ErrorHandling_TipPickup( device & ML_STAR, sequence & seq_TipsToUse ) void {
    private dialog customDialog_28;
    private dialog dialogHandle_29;
    private dialog customDialog_30;
    private dialog dialogHandle_31;
    private variable ret_AbortMethod;
    private variable var_DialogBoxString;
    private variable loopCounter_ChannelsNoTips;
    private variable ret_ReloadTips;
    private variable channelIndex;
    private variable flag_SkipToNextTipRack;
    private variable var_TipSequenceCurrentPosition;
    private variable var_NumberChannelsWithNoTips;
    private variable var_PickupPattern;
    private variable var_NoTipChannelString;
    private variable var_NumberTipsRemaining;
    private variable firmwareReturn;
    private variable var_Channel;
    private variable isTipPresent;
    private variable var_TipPickupPattern;
    private variable ret_RetryNextTipRack;
    private variable var_TipSequenceEndPosition;
    private variable Labware_ID;
    private variable Tip_Counter;
    private variable SimOn;
    private variable firmwareCommand;
    private variable arr_ChannelsNoTip[];
    MECC::TraceComment(Translate("START TIP PICKUP ERROR HANDLING"));
    SimOn = HSLML_STAR::IsSimulatorMode(ML_STAR);
    if (SimOn == 0)
    {
      var_PickupPattern = Translate("");
      arr_ChannelsNoTip.SetSize(0);
      {
        for(channelIndex = 0; channelIndex < 8;)
        {
          channelIndex = channelIndex + 1;
          firmwareCommand = StrConcat4(Translate("P"), channelIndex, Translate("RW"), Translate(""));
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
            	firmwareReturn = arrRetValues[3];
          }
          isTipPresent = StrMid(firmwareReturn, 5, 1);
          if (isTipPresent == "1")
          {
            var_TipPickupPattern = Translate("0");
          }
          else
          {
            var_TipPickupPattern = Translate("1");
            arr_ChannelsNoTip.AddAsLast(channelIndex);
          }
          var_PickupPattern = var_PickupPattern + var_TipPickupPattern;
        }
      }
      var_NumberChannelsWithNoTips=arr_ChannelsNoTip.GetSize();
      var_NoTipChannelString = Translate("");
      {
        for(loopCounter_ChannelsNoTips = 0; loopCounter_ChannelsNoTips < var_NumberChannelsWithNoTips;)
        {
          loopCounter_ChannelsNoTips = loopCounter_ChannelsNoTips + 1;
          var_Channel=arr_ChannelsNoTip.GetAt(loopCounter_ChannelsNoTips-1);
          var_Channel = StrIStr(var_Channel);
          if (loopCounter_ChannelsNoTips != 1)
          {
            var_Channel = StrConcat2(Translate(", "), var_Channel);
          }
          var_NoTipChannelString = var_NoTipChannelString + var_Channel;
        }
      }
      var_TipSequenceCurrentPosition = seq_TipsToUse.GetCurrentPosition();
      var_TipSequenceEndPosition = seq_TipsToUse.GetCount();
      var_NumberTipsRemaining = var_TipSequenceEndPosition - var_TipSequenceCurrentPosition;
      var_NumberTipsRemaining = var_NumberTipsRemaining + 1;
      flag_SkipToNextTipRack = 1;
      if (var_NumberTipsRemaining <= 96)
      {
        flag_SkipToNextTipRack = 0;
      }
      var_DialogBoxString = StrConcat4(Translate("Channel(s) "), var_NoTipChannelString, Translate(" were not able to pick up the requested tip type."), Translate(""));
      customDialog_28.InitCustomDialog("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");
      customDialog_28.SetCustomDialogProperty( "radioButton2.IsEnabled", flag_SkipToNextTipRack );
      customDialog_28.ShowCustomDialog();
      ret_AbortMethod = customDialog_28.GetCustomDialogProperty( "ReturnValue" );
      ret_ReloadTips = customDialog_28.GetCustomDialogProperty( "radioButton1.IsChecked" );
      ret_RetryNextTipRack = customDialog_28.GetCustomDialogProperty( "radioButton2.IsChecked" );
      if (ret_AbortMethod == 2)
      {
        abort;
      }
      Labware_ID = SeqGetLabwareId(seq_TipsToUse);
      Labware_ID = StrLeft(Labware_ID, 3);
      if (Labware_ID == "TIP")
      {
        Tip_Counter = Translate("TruSeq_50F_Counter");
      }
      if (Labware_ID == "stf")
      {
        Tip_Counter = Translate("TruSeq_SVF_Counter");
      }
      if (Labware_ID == "HTF")
      {
        Tip_Counter = Translate("TruSeq_HVF_Counter");
      }
      if (ret_ReloadTips == 1)
      {
        PTL::ResetUnloadingStateAndSequences();
        PTL::SetUnloadingState("UserResponseTime", 0);
        PTL::SetUnloadingState("ErrorHandling", 3);
        PTL::SetUnloadingSize(1);
        PTL::SetUnloadingSequence(0, seq_TipsToUse, hslFalse, "");
        if( 0 == PTL::Unload(ML_STAR) )
        {
              PTL::RaiseRuntimeError(-1540095744, PTL::IDS::smartStepUnload, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
        PTL::GetUnloadingSequence(0, seq_TipsToUse);
        customDialog_30.InitCustomDialog("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");
        customDialog_30.ShowCustomDialog();
        PTL::ResetLoadingStateAndSequences();
        PTL::SetLoadingState("UserResponseTime", hslInfinite);
        PTL::SetLoadingState("ErrorHandling", 3);
        PTL::SetLoadingState("CalibrateCarrierChannel", -1);
        PTL::SetLoadingSize(1);
        PTL::SetLoadingSequence(0, seq_TipsToUse, 1, -10, hslTrue, hslTrue, Tip_Counter);
        if( 0 == PTL::Load(ML_STAR, hslTrue) )
        {
              PTL::RaiseRuntimeError(-1556872960, PTL::IDS::smartStepLoad, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
        PTL::GetLoadingSequence(0, seq_TipsToUse);
        ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
        onerror goto errLabel_32 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_32 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          dialogHandle_31.SetOutput(Translate("The instrument is still having trouble picking up tips."), Translate("\n\nThe method will now abort."), Translate("\n\nIf this issue persists, please contact Hamilton Service."));
          dialogHandle_31.ShowOutput(Translate("Error Picking Up Tips"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          abort;
        }   /* end if from skip handler if no error */
      }
      if (ret_RetryNextTipRack == 1)
      {
        if (var_TipSequenceCurrentPosition <= 96)
        {
          seq_TipsToUse.SetCurrentPosition(97);
        }
        else
        {
          if (var_TipSequenceCurrentPosition <= 192)
          {
            seq_TipsToUse.SetCurrentPosition(193);
          }
          else
          {
            if (var_TipSequenceCurrentPosition <= 288)
            {
              seq_TipsToUse.SetCurrentPosition(289);
            }
            else
            {
              if (var_TipSequenceCurrentPosition <= 384)
              {
                seq_TipsToUse.SetCurrentPosition(385);
              }
              else
              {
                if (var_TipSequenceCurrentPosition <= 480)
                {
                  seq_TipsToUse.SetCurrentPosition(481);
                }
                else
                {
                  if (var_TipSequenceCurrentPosition <= 576)
                  {
                    seq_TipsToUse.SetCurrentPosition(577);
                  }
                  else
                  {
                    if (var_TipSequenceCurrentPosition <= 672)
                    {
                      seq_TipsToUse.SetCurrentPosition(673);
                    }
                    else
                    {
                      if (var_TipSequenceCurrentPosition <= 768)
                      {
                        seq_TipsToUse.SetCurrentPosition(769);
                      }
                      else
                      {
                        if (var_TipSequenceCurrentPosition <= 864)
                        {
                        seq_TipsToUse.SetCurrentPosition(865);
                        }
                      }
                    }
                  }
                }
              }
            }
          }
        }
        onerror goto errLabel_33 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_33 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          dialogHandle_29.SetOutput(Translate("The instrument is still having trouble picking up tips."), Translate("\n\nThe method will now abort."), Translate("\n\nIf this issue persists, please contact Hamilton Service."));
          dialogHandle_29.ShowOutput(Translate("Error Picking Up Tips"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          abort;
        }   /* end if from skip handler if no error */
      }
    }
    MECC::TraceComment(Translate("END TIP PICKUP ERROR HANDLING"));
  }
} // library namespace
