#include "NIST TruSeq Nano DNA NGS v1.0.res"
global device ML_STAR ("NIST TruSeq Nano DNA NGS v1.0.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "NIST\\Libraries\\NIST_Device_Controllers.hs_" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _process1 { #include "NIST\\Libraries\\NIST_Device_Controllers.hs_" }
 namespace _process1 { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "HSLInhecoTEC\\HSLInhecoTECLib.hsl" }
 namespace _process1 { #include "HSLInhecoTEC\\HSLInhecoTECLib.hsl" }
variable Device;
variable ID;
variable Time;
dialog customDialog_1;
dialog customDialog_2;
dialog customDialog_3;
variable DeviceHHS;
dialog customDialog_4;
variable process1;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _process1 { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _process1 { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _process1 { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }
 namespace _process1 {  #include __filename__ ".sub"  }
namespace _process1{ function tfn_process1 () {
    NIST_DEVICE_CONTROLLERS::DoorControlODTC(Device, 0);
    if(0){
      NIST_DEVICE_CONTROLLERS::StartScriptODTC(Device, Translate("C:\\Program Files (x86)\\HAMILTON\\Methods\\NIST\\ODTC Files\\Device_Test_Initialization.xml"), Time, ID);
      NIST_DEVICE_CONTROLLERS::WaitForScriptODTC(Device, Time, ID);
      NIST_DEVICE_CONTROLLERS::DoorControlODTC(Device, 1);
    }
  } }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    NIST_DEVICE_CONTROLLERS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    NIST_DEVICE_CONTROLLERS::InitODTC(Translate("192.168.88.253"), Device);
    process1 = Fork("_process1::tfn_process1");
    if( process1 == 0 )
    {
          MECC::RaiseRuntimeErrorEx(-1590820608, MECC::IDS::stepNameThreadBegin, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if(0){
      NIST_DEVICE_CONTROLLERS::InitCPAC();
      NIST_DEVICE_CONTROLLERS::SetCPACTemperature(1, 6);
      HSLHamHeaterShaker::CreateUsbDevice(3, DeviceHHS);
      HSLHamHeaterShaker::SetPlateLock(DeviceHHS, 0);
    }
    if(0 == Join(process1, hslInfinite) )
    {
          MECC::RaiseRuntimeErrorEx(-1574043390, MECC::IDS::stepNameThreadWaitFor, MECC::IDS::errorStepFailedTimeout, "", "HxMetEdCompCmd");
    }
    if(0){
      {
        	ML_STAR._8A76E9A2_8053_4a32_B36F_AD9556B09C99("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"); // EasyiSWAPTransport
      }
      customDialog_2.InitCustomDialog("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");
      customDialog_2.ShowCustomDialog();
      NIST_DEVICE_CONTROLLERS::DoorControlODTC(Device, 0);
      NIST_DEVICE_CONTROLLERS::RunScriptODTC(Device, Translate("C:\\Program Files (x86)\\HAMILTON\\Methods\\NIST\\ODTC Files\\Device_Test_Incubation.xml"));
      NIST_DEVICE_CONTROLLERS::DoorControlODTC(Device, 1);
      {
        	ML_STAR._8A76E9A2_8053_4a32_B36F_AD9556B09C99("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"); // EasyiSWAPTransport
      }
      customDialog_1.InitCustomDialog("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");
      customDialog_1.ShowCustomDialog();
      {
        	ML_STAR._8A76E9A2_8053_4a32_B36F_AD9556B09C99("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"); // EasyiSWAPTransport
      }
      customDialog_4.InitCustomDialog("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");
      customDialog_4.ShowCustomDialog();
      HSLHamHeaterShaker::SetPlateLock(DeviceHHS, 1);
      HSLHamHeaterShaker::StartShakerTimed(DeviceHHS, 1200, 30);
      HSLHamHeaterShaker::WaitForShaker(DeviceHHS);
      HSLHamHeaterShaker::SetPlateLock(DeviceHHS, 0);
      {
        	ML_STAR._8A76E9A2_8053_4a32_B36F_AD9556B09C99("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"); // EasyiSWAPTransport
      }
      customDialog_3.InitCustomDialog("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");
      customDialog_3.ShowCustomDialog();
    }
    NIST_DEVICE_CONTROLLERS::TerminateODTC(Device);
    if(0){
      NIST_DEVICE_CONTROLLERS::TerminateCPAC();
      HSLHamHeaterShaker::Terminate();
    }
    NIST_DEVICE_CONTROLLERS::_ExitLibrary();
  } }
