 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\Illumina\\Library\\Illumina TruSeq Nano DNA\\SMTs\\Tip Present Check_5ml_1ml.hs_" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\Illumina\\Library\\Illumina TruSeq Nano DNA\\TruSeqNano_Processes.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\Illumina\\Library\\Illumina TruSeq Nano DNA\\TruSeqNano_Prep.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLUtilLib2.hsl" }
 namespace _Method { #include "HSLUtilLib.hsl" }
 namespace _Method { #include "TrackLightHelper.hs_" }
 namespace _Method { #include "ASWStandardDialogs\\AswStatusDialog.hsl" }
 namespace _Method { #include "Libraries\\NIST_Device_Controllers.hs_" }
 namespace _Method { #include "Libraries\\NIST_Nano_Processes.hs_" }
#include "NIST TruSeq Nano DNA NGS v1.0.res"
dialog customDialog_1;
variable AnswerStopPoint;
variable AnswerStartPoint;
variable AnswerAdapterLabware;
variable File_Normalization;
variable RunProcess4;
variable RunProcess1;
variable RunProcess2;
variable RunProcess3;
variable File_SampleSheet;
variable NumberOfSamples;
variable HHS1;
variable HHS2;
variable HHS3;
variable TimerWasStopped;
variable SetTempCPAC;
variable SetTempHHS1;
variable SetTempHHS2;
variable SetTempHHS3;
variable PlatesInStack1;
variable PlatesInStack2;
variable PlatesInStack3;
variable PlatesInStack4;
variable ResultOfPlateCheck_msg;
variable ResultOfPlateCheck_flag;
variable SimOn;
variable ExtraTips300;
variable TipsPerSample_50;
variable TipsPerSample_300;
variable Number1000Tips;
variable Number50Tips;
variable Number300Tips;
variable AnswerPooling;
variable NumberOfIndexes;
variable array_ALPPositions[];
variable array_Index1Positions[];
variable array_Index2Positions[];
file file1;
variable PlateCarBCsToCheck_PCR;
variable StartingTipPosition_1000;
variable StartingTipPosition_300;
variable StartingTipPosition_50;
variable HHS4;
variable HHS5;
variable SetTempHHS4;
variable SetTempHHS5;
dialog dialogHandle_2;
variable VialCarBCsToCheck_Rgts;
variable AdapterBCsToRead;
sequence DummyStackSeq;
dialog dialogHandle_3;
variable TrackingEthanolVolume_80;
variable ButtonClick_Reagents;
variable ButtonClick_RunSettings;
variable Volume_TrisBuffer;
dialog dialogHandle_4;
variable RunProcess5;
variable GripperDevice;
variable var_disable_HHS5;
variable SkipAllTimers;
variable Skip1stCleanup;
variable UserEmailAddress;
variable EmailTo;
variable StartingTipPosition_50_Override;
variable StartingTipPosition_1000_Override;
variable StartingTipPosition_300_Override;
variable SendEmail;
variable VialCarBCsToCheck_Rgts_Lg;
variable TrackToParkAL;
sequence GripperSequence;
sequence seq_dummy;
variable loopCounter1;
variable ret_PlateStackerDialogChoice;
dialog dialogHandle_5;
dialog dialogHandle_6;
dialog dialogHandle_7;
dialog dialogHandle_8;
dialog dialogHandle_9;
dialog dialogHandle_10;
variable TrackToScanBarcode;
dialog dialogHandle_11;
dialog dialogHandle_12;
global device ML_STAR ("NIST TruSeq Nano DNA NGS v1.0.lay", "ML_STAR", hslTrue);
dialog dialogHandle_13;
dialog dialogHandle_14;
dialog dialogHandle_15;
dialog dialogHandle_16;
dialog customDialog_17;
dialog dialogHandle_18;
dialog dialogHandle_19;
dialog dialogHandle_20;
dialog dialogHandle_21;
dialog dialogHandle_22;
dialog dialogHandle_23;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    TIP_PRESENT_CHECK_5ML_1ML::_InitLibrary();
    TRUSEQNANO_PROCESSES::_InitLibrary();
    TRUSEQNANO_PREP::_InitLibrary();
    TRACKLIGHTHELPER::_InitLibrary();
    NIST_DEVICE_CONTROLLERS::_InitLibrary();
    NIST_NANO_PROCESSES::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    Abstract();
    MECC::TraceComment(Translate("==================================================================================================================================\nGlobal Variables and Arrays\n=================================================================================================================================="));
    SimOn = HSLML_STAR::IsSimulatorMode(ML_STAR);
    if (SimOn == 1)
    {
      Trace ("***** SIMULATED RUN *****");
    }
    GripperDevice = 1;
    SkipAllTimers = 0;
    TrackToScanBarcode = 54;
    TrackToParkAL = 54;
    AswStatusDialog::Initialize(Translate("NIST TruSeq Nano Process"));
    SendEmail = 0;
    MECC::TraceComment(Translate("==================================================================================================================================\nOperator Selections\n=================================================================================================================================="));
    AswStatusDialog::SetStatusText(Translate("Select Run Settings"));
    file1.AddField("AnswerStartPoint", AnswerStartPoint, hslInteger);
    file1.AddField("AnswerStopPoint", AnswerStopPoint, hslInteger);
    file1.AddField("File_SampleSheet", File_SampleSheet, hslString, 255);
    file1.AddField("AnswerAdapterLabware", AnswerAdapterLabware, hslInteger);
    file1.AddField("AnswerPooling", AnswerPooling, hslInteger);
    file1.SetDelimiter(";");
    if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\Illumina\\Files\\CustomDialogDefaults_Nano.txt", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\Illumina\\Files\\CustomDialogDefaults_Nano.txt", "HxMetEdCompCmd");
    }
    if( 0 == file1.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    customDialog_17.InitCustomDialog("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");
    customDialog_17.SetCustomDialogProperty( "comboBox1.SelectedIndex", AnswerStartPoint );
    customDialog_17.SetCustomDialogProperty( "comboBox2.SelectedIndex", AnswerStopPoint );
    customDialog_17.SetCustomDialogProperty( "path1.Path", File_SampleSheet );
    customDialog_17.SetCustomDialogProperty( "comboBox4.SelectedIndex", AnswerAdapterLabware );
    customDialog_17.SetCustomDialogProperty( "comboBox6.SelectedIndex", AnswerPooling );
    customDialog_17.ShowCustomDialog();
    ButtonClick_RunSettings = customDialog_17.GetCustomDialogProperty( "ReturnValue" );
    AnswerStartPoint = customDialog_17.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
    AnswerStopPoint = customDialog_17.GetCustomDialogProperty( "comboBox2.SelectedIndex" );
    File_SampleSheet = customDialog_17.GetCustomDialogProperty( "path1.Path" );
    AnswerAdapterLabware = customDialog_17.GetCustomDialogProperty( "comboBox4.SelectedIndex" );
    AnswerPooling = customDialog_17.GetCustomDialogProperty( "comboBox6.SelectedIndex" );
    SkipAllTimers = customDialog_17.GetCustomDialogProperty( "radioButton1.IsChecked" );
    Skip1stCleanup = customDialog_17.GetCustomDialogProperty( "radioButton3.IsChecked" );
    UserEmailAddress = customDialog_17.GetCustomDialogProperty( "textBox1.Text" );
    if (ButtonClick_RunSettings == 3)
    {
      abort;
    }
    Trace ("Starting point index:  ", AnswerStartPoint);
    Trace ("Stopping point index:  ", AnswerStopPoint);
    Trace ("Sample plate file:  ", File_SampleSheet);
    Trace ("Adapter Labware (1=DAP, 2=vials, 0,3=not applicable):  ", AnswerAdapterLabware);
    Trace ("Pooling? (1=yes, 2=no, 0,3=not applicable):  ", AnswerPooling);
    Trace ("Skip Timers? (true=yes, false=no):  ", SkipAllTimers);
    Trace ("E-mail Address:  ", UserEmailAddress);
    if (UserEmailAddress != "customer@company.com")
    {
      SendEmail = 1;
    }
    Trace ("Send E-mail? (1=yes, 0=no)  ", SendEmail);
    if (AnswerStopPoint < AnswerStartPoint)
    {
      dialogHandle_21.SetOutput(Translate("The selection for Stopping Point occurs before the selection for Starting Point.  Method will now abort."));
      dialogHandle_21.ShowOutput(Translate("Selections Incorrect"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
      abort;
    }
    file1.AddField("AnswerStartPoint", AnswerStartPoint, hslInteger);
    file1.AddField("AnswerStopPoint", AnswerStopPoint, hslInteger);
    file1.AddField("File_SampleSheet", File_SampleSheet, hslString, 255);
    file1.AddField("AnswerAdapterLabware", AnswerAdapterLabware, hslInteger);
    file1.AddField("AnswerPooling", AnswerPooling, hslInteger);
    file1.SetDelimiter(";");
    if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\Illumina\\Files\\CustomDialogDefaults_Nano.txt", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\Illumina\\Files\\CustomDialogDefaults_Nano.txt", "HxMetEdCompCmd");
    }
    if( 0 == file1.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    MECC::TraceComment(Translate("==================================================================================================================================\nMethod Preparation\n=================================================================================================================================="));
    if (File_SampleSheet == "")
    {
      dialogHandle_20.SetInputSize(1);
      dialogHandle_20.SetInputField(0, Translate("Please browse for and select the Sample Plate File file (txt file)."), hslString, "C:\\Program Files (x86)\\HAMILTON\\Illumina\\Methods\\ExampleSampleSheet.csv");
      dialogHandle_20.ShowInput(Translate("Sample Sheet File"), hslInfinite, hslOKOnly | hslDefButton1);
      File_SampleSheet = dialogHandle_20.GetInputField(0);
      Trace ("***** Sample Plate File:  ", File_SampleSheet);
    }
    array_Index1Positions.SetSize(0);
    array_Index2Positions.SetSize(0);
    array_ALPPositions.SetSize(0);
    if (AnswerStartPoint < 5)
    {
      TRUSEQNANO_PREP::ReadSamplePlateFile(File_SampleSheet, NumberOfSamples, NumberOfIndexes, array_Index1Positions, array_Index2Positions, array_ALPPositions);
    }
    else
    {
      dialogHandle_15.SetInputSize(1);
      dialogHandle_15.SetInputField(0, Translate("Please browse for and select the normalization worklist."), hslString, "C:\Illumina\Files");
      dialogHandle_15.ShowInput(Translate("Normalization"), hslInfinite, hslOKOnly | hslDefButton1);
      File_Normalization = dialogHandle_15.GetInputField(0);
      Trace ("***** Normalization File selected:  ", File_Normalization);
      TRUSEQNANO_PROCESSES::Read_NormFile(ML_STAR, File_Normalization, Volume_TrisBuffer, NumberOfSamples);
    }
    if (AnswerStartPoint < 5)
    {
      if (AnswerAdapterLabware == 2)
      {
        if (NumberOfIndexes != 1)
        {
          dialogHandle_13.SetOutput(Translate("The adapter labware selected in the Run Settings screen does not correspond with the number of adapters found in the sample plate file."), "\n", Translate(""), "\n", Translate("Please check the sample plate file and note the number of file columns listing different types of adapters. Method will now abort."));
          dialogHandle_13.ShowOutput(Translate("Selections Incorrect"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
          abort;
        }
      }
      if (AnswerAdapterLabware == 1)
      {
        if (NumberOfIndexes != 2)
        {
          dialogHandle_16.SetOutput(Translate("The adapter labware selected in the Run Settings screen does not correspond with the number of adapters found in the sample plate file."), "\n", Translate(""), "\n", Translate("Please check the sample plate file and note the number of file columns listing different types of adapters. Method will now abort."));
          dialogHandle_16.ShowOutput(Translate("Selections Incorrect"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
          abort;
        }
      }
    }
    Trace ("***** Number of Samples:  ", NumberOfSamples);
    if (AnswerStartPoint <= 2)
    {
      if (AnswerStopPoint >= 2)
      {
        if (AnswerAdapterLabware == 1)
        {
          onerror goto errLabel_24 ;
          err.Clear();
          dialogHandle_14.SetOutput(Translate("DAP plate selected for adapters. Please pierce the required wells in the plate!"));
          dialogHandle_14.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          errLabel_24 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
          }   /* end if from skip handler if no error */
          if (SendEmail == 1)
          {
            onerror goto errLabel_25 ;
            err.Clear();
            Util::SendEMail(UserEmailAddress, Translate("Unseal DAP to continue"), Translate(""));
            errLabel_25 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
              Trace ("Email is not setup correctly!");
            }   /* end if from skip handler if no error */
          }
        }
      }
    }
    if (AnswerStartPoint <= 2)
    {
      if (AnswerStopPoint >= 2)
      {
        if (AnswerAdapterLabware != 1)
        {
          if (AnswerAdapterLabware != 2)
          {
            dialogHandle_18.SetOutput(Translate("Will you being using the DAP plate instead of adapters in vials?"));
            AnswerAdapterLabware = dialogHandle_18.ShowOutput(Translate("Adapter Labware"), hslYesNo | hslInformation | hslDefButton1, hslInfinite);
            if (AnswerAdapterLabware == 6)
            {
              MECC::TraceComment(Translate("********** Using the DAP plate **********"));
              AnswerAdapterLabware = 1;
            }
            else
            {
              MECC::TraceComment(Translate("********** Using the Adapters in Vials **********"));
              AnswerAdapterLabware = 2;
            }
            Trace ("***** Adapters will be in (1=DAP, 2=Vials):  ", AnswerAdapterLabware);
          }
        }
      }
    }
    else
    {
      if (AnswerStartPoint < 5)
      {
        if (AnswerStopPoint >= 3)
        {
          if (AnswerAdapterLabware != 1)
          {
            if (AnswerAdapterLabware != 2)
            {
              dialogHandle_19.SetOutput(Translate("Did you use the DAP plate instead of adapters in vials for these samples?"));
              AnswerAdapterLabware = dialogHandle_19.ShowOutput(Translate("Adapter Labware"), hslYesNo | hslInformation | hslDefButton1, hslInfinite);
              if (AnswerAdapterLabware == 6)
              {
                MECC::TraceComment(Translate("********** Used the DAP plate **********"));
                AnswerAdapterLabware = 1;
              }
              else
              {
                MECC::TraceComment(Translate("********** Used Adapters in Vials **********"));
                AnswerAdapterLabware = 2;
              }
              Trace ("***** Adapters were supplied in (1=DAP, 2=Vials):  ", AnswerAdapterLabware);
            }
          }
        }
      }
    }
    ML_STAR.HSP_HHS3.SetCount(NumberOfSamples);
    ML_STAR.HSP_Pipette.SetCount(NumberOfSamples);
    ML_STAR.HSP_CPAC.SetCount(NumberOfSamples);
    ML_STAR.MIDI_HHS3.SetCount(NumberOfSamples);
    ML_STAR.MIDI_Pipette.SetCount(NumberOfSamples);
    ML_STAR.MIDI_CPAC.SetCount(NumberOfSamples);
    ML_STAR.MIDI_OnMagnet.SetCount(NumberOfSamples);
    ML_STAR.HSP_OnMagnet.SetCount(NumberOfSamples);
    CalculateResources();
    var_disable_HHS5 = 0;
    AswStatusDialog::AppendText(Translate("   Initializing devices"));
    MECC::TraceComment(Translate("********** Initialize Devices *********"));
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    TRUSEQNANO_PREP::InitHHSs(HHS1, HHS2, HHS3, HHS4, HHS5, SimOn);
    if (AnswerStartPoint == 1)
    {
      SetTempHHS1 = 0;
      SetTempHHS2 = 0;
      SetTempHHS3 = 0;
      SetTempHHS4 = 80;
      if (var_disable_HHS5 != 1)
      {
        SetTempHHS5 = 30;
      }
      SetTempCPAC = 6;
    }
    if (AnswerStartPoint == 2)
    {
      SetTempHHS1 = 0;
      SetTempHHS2 = 0;
      SetTempHHS3 = 0;
      SetTempHHS4 = 80;
      if (var_disable_HHS5 != 1)
      {
        SetTempHHS5 = 37;
      }
      SetTempCPAC = 6;
    }
    if (AnswerStartPoint > 2)
    {
      SetTempHHS1 = 0;
      SetTempHHS2 = 0;
      SetTempHHS3 = 0;
      SetTempHHS4 = 0;
      if (var_disable_HHS5 != 1)
      {
        SetTempHHS5 = 37;
      }
      SetTempCPAC = 20;
    }
    if (AnswerStartPoint == 4)
    {
      if (var_disable_HHS5 != 1)
      {
        SetTempHHS5 = 0;
      }
    }
    Trace ("Setting Temperatures of Devices:");
    Trace ("HHS1 set temperature:  ", SetTempHHS1);
    Trace ("HHS2 set temperature:  ", SetTempHHS2);
    Trace ("HHS3 set temperature:  ", SetTempHHS3);
    Trace ("HHS4 set temperature:  ", SetTempHHS4);
    Trace ("HHS5 set temperature:  ", SetTempHHS5);
    Trace ("CPAC set temperature:  ", SetTempCPAC);
    TRUSEQNANO_PREP::SetHHSTemperature(HHS1, SetTempHHS1);
    TRUSEQNANO_PREP::SetHHSTemperature(HHS2, SetTempHHS2);
    TRUSEQNANO_PREP::SetHHSTemperature(HHS3, SetTempHHS3);
    TRUSEQNANO_PREP::SetHHSTemperature(HHS4, SetTempHHS4);
    if (var_disable_HHS5 != 1)
    {
      TRUSEQNANO_PREP::SetHHSTemperature(HHS5, SetTempHHS5);
    }
    if (SimOn == 0)
    {
      TRUSEQNANO_PREP::InitCPAC(SimOn);
      TRUSEQNANO_PREP::InitLiquidWasteSensor();
      TRUSEQNANO_PREP::SetCPACTemperature(SetTempCPAC);
    }
    AswStatusDialog::AppendText(Translate("   Tip counters"));
    TRUSEQNANO_PREP::TipCounterRead(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, Number50Tips, Number300Tips, Number1000Tips);
    StartingTipPosition_50 = ML_STAR.MlStar50ulTipWithFilter.GetCurrentPosition();
    StartingTipPosition_300 = ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetCurrentPosition();
    StartingTipPosition_1000 = ML_STAR.MlStar1000ulHighVolumeTipWithFilter.GetCurrentPosition();
    AswStatusDialog::AppendText(Translate("   Loading carriers"));
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    if (AnswerStartPoint == 1)
    {
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      Trace ("Barcodes to check on large volume reagent carrier:  ", VialCarBCsToCheck_Rgts_Lg);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    if (AnswerStartPoint == 5)
    {
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    if (AnswerStartPoint < 5)
    {
      if (AnswerStartPoint > 1)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
      if (AnswerStartPoint != 4)
      {
        if (AnswerStopPoint != 1)
        {
          Trace ("Barcodes to check on small volume reagent carrier:  ", VialCarBCsToCheck_Rgts);
          ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
        }
      }
    }
    if (RunProcess2 == 1)
    {
      if (AnswerAdapterLabware == 2)
      {
        Trace ("Barcodes to check on adapter vial carrier:  ", AdapterBCsToRead);
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
    }
    Trace ("Barcodes to check on plate carrier:  ", PlateCarBCsToCheck_PCR);
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    if (SimOn == 0)
    {
      AswStatusDialog::AppendText(Translate("   Checking plate quantities"));
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          TRUSEQNANO_PREP::CheckPlatesInStacks(ML_STAR, GripperDevice, DummyStackSeq, ML_STAR.Stack2, ML_STAR.Stack3, ML_STAR.Stack4, PlatesInStack1, PlatesInStack2, PlatesInStack3, PlatesInStack4, ResultOfPlateCheck_flag, ResultOfPlateCheck_msg, ML_STAR.COREGripTool);
          if (ResultOfPlateCheck_flag == 1)
          {
            Trace ("***Result of plate stacker check indicates incorrect number of plates");
            Trace ("***User given the chance to retry or abort");
            dialogHandle_23.SetOutput(ResultOfPlateCheck_msg, Translate("\n\nThe stacker carrier will now be unloaded."), "\n");
            dialogHandle_23.ShowOutput(Translate("Incorrect Number of Plates in Stacker Carrier"), hslOKOnly | hslExclamation | hslDefButton1, hslInfinite);
            ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
            dialogHandle_22.SetOutput(Translate("Please place the correct number of plates in the stacker carrier and select 'Retry'. 'Cancel' will aborth the method."), "\n");
            ret_PlateStackerDialogChoice = dialogHandle_22.ShowOutput(Translate("Place The Correct Number of Plates in the Stacker Carrier"), hslRetryCancel | hslExclamation | hslDefButton1, hslInfinite);
            if (ret_PlateStackerDialogChoice == 4)
            {
              Trace ("***Retrying plate stacker check");
            }
            else
            {
              Trace ("***User has selected abort");
              ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
              ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
              abort;
            }
          }
          else
          {
            Trace ("***Result of plate stacker check indicates correct number of plates");
            break;
          }
        }
      }
    }
    MECC::TraceComment(Translate("==================================================================================================================================\nBegin Method\n=================================================================================================================================="));
    if (RunProcess1 == 1)
    {
      Process1_Clean_ER_SizeSelect();
    }
    if (RunProcess2 == 1)
    {
      Process2_Adenylate_Ligate_Cleanup();
    }
    if (RunProcess3 == 1)
    {
      Process3_PCRPrep();
    }
    if (RunProcess4 == 1)
    {
      Process4_PCR_Cleanup();
    }
    if (RunProcess5 == 1)
    {
      Process5_NormalizePool();
    }
    MECC::TraceComment(Translate("==================================================================================================================================\nMethod End - Start Deck Unloading\n=================================================================================================================================="));
    ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    MECC::TraceComment(Translate("***** Unload Carriers *****"));
    AswStatusDialog::AppendText(Translate("Unload Carriers"));
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    if (AnswerStartPoint <= 2)
    {
      if (AnswerStopPoint >= 2)
      {
        if (AnswerAdapterLabware == 2)
        {
          ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        }
      }
    }
    if (AnswerStartPoint < 4)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      if (AnswerStartPoint == 1)
      {
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      }
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    if (AnswerStartPoint == 1)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    if (AnswerStartPoint >= 4)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    MECC::TraceComment(Translate("==================================================================================================================================\nTerminate Connections\n=================================================================================================================================="));
    AswStatusDialog::AppendText(Translate("Method complete"));
    TRUSEQNANO_PREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
    TRUSEQNANO_PREP::TerminateHHSs();
    TRUSEQNANO_PREP::TerminateCPAC();
    dialogHandle_3.SetOutput(Translate("Please empty the tip waste, and check/empty the liquid waste container."), Translate("\n\nConsider performing Daily/Weekly Maintenance at this time."));
    dialogHandle_3.ShowOutput(Translate("Method Complete"), hslOKOnly | hslInformation | hslDefButton1, 120);
    AswStatusDialog::Terminate();
    TIP_PRESENT_CHECK_5ML_1ML::_ExitLibrary();
    TRUSEQNANO_PROCESSES::_ExitLibrary();
    TRUSEQNANO_PREP::_ExitLibrary();
    TRACKLIGHTHELPER::_ExitLibrary();
    NIST_DEVICE_CONTROLLERS::_ExitLibrary();
    NIST_NANO_PROCESSES::_ExitLibrary();
  } }
