private function Abstract(  ) void ;
private function CalculateResources(  ) void ;
function Check_TipQty( sequence & seq_TipsToCheck, variable var_TipsRequired, variable var_TipType ) void ;
private function CleanUp( sequence & seq_BeadDestination, sequence & seq_SampleSourcePosition, sequence & seq_PlateOnMagnet, sequence & seq_PlateWastePosition, variable var_TransferFromHSPtoMIDI, variable var_VolumeSample, variable var_VolumeSupernatant, variable var_ResuspensionBuffer, variable var_SamplePlateType, variable var_BeadPlateType, variable var_MagnetWaitTime, variable var_MoveToShaker ) void ;
private function Process1_Clean_ER_SizeSelect(  ) void ;
private function Process2_Adenylate_Ligate_Cleanup(  ) void ;
private function Process3_PCRPrep(  ) void ;
private function Process4_PCR_Cleanup(  ) void ;
private function Process5_NormalizePool(  ) void ;
private function Version(  ) void ;
private function WaitForAndCheckTimer( timer & IncubationTimer ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  private variable ResultTipCheck;
  private variable ChPatternAbort;
  MECC::TraceComment(Translate("*************************************************************************\n******************** METHOD HAS ABORTED ********************\n*************************************************************************\n"));
  AswStatusDialog::SetStatusText(Translate("Method Aborting..."));
  if (ButtonClick_Reagents == 1)
  {
    TRUSEQNANO_PREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
    TRUSEQNANO_PREP::TerminateHHSs();
    TRUSEQNANO_PREP::TerminateCPAC();
  }
  ResultTipCheck = TIP_PRESENT_CHECK_5ML_1ML::Check_Tips_Present_1ml(ML_STAR, ChPatternAbort, 8);
  if (ResultTipCheck == 1)
  {
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  AswStatusDialog::Terminate();
}

private function Process1_Clean_ER_SizeSelect(  ) void {
  private timer Incubate_LowTemp;
  private timer WaitingForMagnet;
  private timer WaitForMagnet;
  private timer Chill_OnCPAC;
  private timer Incubate_RT_5min;
  private variable NumberOfTipsRequired;
  private variable Timer_WaitForMagnet_300;
  private variable Timer_Shake_120s;
  private variable Timer_Incubate_LowTemp_1800s;
  private variable Timer_Incubate_RT_5min;
  private variable Timer_Chill_OnCPAC_240s;
  private dialog dialogHandle_1;
  private dialog dialogHandle_2;
  private dialog dialogHandle_3;
  private dialog dialogHandle_4;
  private dialog dialogHandle_5;
  private dialog dialogHandle_6;
  MECC::TraceComment(Translate("==================================================================================================================================\nLocal Variables and Arrays\n=================================================================================================================================="));
  if (SkipAllTimers == 0)
  {
    Timer_WaitForMagnet_300 = 300;
    Timer_Shake_120s = 120;
    Timer_Incubate_LowTemp_1800s = 1800;
    Timer_Incubate_RT_5min = 300;
    Timer_Chill_OnCPAC_240s = 240;
  }
  else
  {
    Timer_WaitForMagnet_300 = 1;
    Timer_Shake_120s = 1;
    Timer_Incubate_LowTemp_1800s = 1;
    Timer_Incubate_RT_5min = 1;
    Timer_Chill_OnCPAC_240s = 1;
  }
  MECC::TraceComment(Translate("==================================================================================================================================\n\nProcess 1 Start: Bead Cleanup, End Repair, and Size Selection\n\n=================================================================================================================================="));
  AswStatusDialog::SetStatusText(Translate("Process 1:  Cleanup, End Repair, Size Selection"));
  AswStatusDialog::AppendText(Translate("   Clean up fragmented DNA"));
  NumberOfTipsRequired = NumberOfSamples * 3;
  Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 50);
  NumberOfTipsRequired = NumberOfSamples * 9;
  Check_TipQty(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, NumberOfTipsRequired, 300);
  NumberOfTipsRequired = 16;
  Check_TipQty(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, NumberOfTipsRequired, 1000);
  MECC::TraceComment(Translate("==================================================================================================================================\nAdd Beads to Plate\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Add beads to plate"));
  TRUSEQNANO_PROCESSES::Add_AmpureSingle(ML_STAR, ML_STAR._Beads_AMPure, ML_STAR.MIDI_Pipette, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, NumberOfSamples, 80, 1, Translate("1"));
  TRUSEQNANO_PREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  CleanUp(ML_STAR.MIDI_Pipette, ML_STAR.HSP_Pipette, ML_STAR.MIDI_OnMagnet, ML_STAR.HSP_Waste, 0, 50, 130, 62.5, 1, 1, 300, 1);
  if( 0 == WaitForMagnet.SetTimer(Timer_WaitForMagnet_300) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("==================================================================================================================================\nBring IMP (MIDI) to Deck\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Bring IMP (a MIDI) to deck"));
  TRUSEQNANO_PROCESSES::MoveMIDI(ML_STAR, ML_STAR.Stack2, ML_STAR.MIDI_Pipette, TrackToScanBarcode, 0, 1, GripperDevice, ML_STAR.COREGripTool);
  SeqIncrement(ML_STAR.Stack2, 1);
  Trace ("***** Waiting for magnet .......");
  WaitForAndCheckTimer(WaitForMagnet);
  MECC::TraceComment(Translate("==================================================================================================================================\nTransfer from CSP (MIDI) to IMP (MIDI)\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Transfer from CSP (MIDI) to IMP (MIDI)"));
  TRUSEQNANO_PROCESSES::Transfer_PlateToPlate(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_Pipette, 60, Translate("Nano_SVF_CleanSample_SurfaceEmpty"), 0, 0.5);
  TRUSEQNANO_PREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("==================================================================================================================================\nMove CSP (MIDI) to Waste\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Move CSP (MIDI) to Waste"));
  TRUSEQNANO_PROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_Waste, 0, 0, 0, GripperDevice, ML_STAR.COREGripTool);
  AswStatusDialog::AppendText(Translate("   Performing End Repair"));
  MECC::TraceComment(Translate("==================================================================================================================================\nTransfer End Repair Mix (ERP2) to IMP (MIDI)\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Transfer End Repair Mix (ERP2) to IMP (MIDI)"));
  TRUSEQNANO_PROCESSES::Add_ReagentFromVial(ML_STAR, NumberOfSamples, ML_STAR.Vial_ERP, ML_STAR.MIDI_Pipette, ML_STAR.MlStar50ulTipWithFilter, 40, Translate("Nano_50F_ERP_SurfaceEmpty"), 5);
  TRUSEQNANO_PREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("==================================================================================================================================\nMove IMP to Shaker and Shake to Mix\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Move IMP to shaker"));
  TRUSEQNANO_PROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_Pipette, ML_STAR.MIDI_HHS3, 0, 0, 1, GripperDevice, ML_STAR.COREGripTool);
  AswStatusDialog::AppendText(Translate("   Shake to mix"));
  TRUSEQNANO_PREP::Shake(HHS3, 1800, Timer_Shake_120s);
  MECC::TraceComment(Translate("==================================================================================================================================\n\n\nINCUBATE - NOT FROM CPAC 30 DEGREES FOR 30 MINUTES TO CPAC\n\n\n=================================================================================================================================="));
  MECC::TraceComment(Translate("==================================================================================================================================\nIncubate Plate at 30 Degrees\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Move IMP to 30C HHS and incubate"));
  TRUSEQNANO_PREP::GetHHSTemperature(HHS5, 30, SimOn);
  TRUSEQNANO_PROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS3, ML_STAR.MIDI_HHS2, 0, 1, 0, GripperDevice, ML_STAR.COREGripTool);
  if( 0 == Incubate_LowTemp.SetTimer(Timer_Incubate_LowTemp_1800s) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  WaitForAndCheckTimer(Incubate_LowTemp);
  TRUSEQNANO_PREP::GetHHSTemperature(HHS5, 30, SimOn);
  MECC::TraceComment(Translate("==================================================================================================================================\nMove IMP to CPAC\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Move IMP to CPAC"));
  onerror goto errLabel_7 ;
  err.Clear();
  TRUSEQNANO_PREP::CheckCPACTemperature(SetTempCPAC, SimOn);
  errLabel_7 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    onerror goto errLabel_8 ;
    err.Clear();
    TRACKLIGHTHELPER::PerformTrackLightCommand(0, TurnLightOnBlinking, ML_STAR);
    if (SendEmail == 1)
    {
      Util::SendEMail(EmailTo, Translate("CPAC check temperature error!"), Translate(""));
    }
    dialogHandle_2.SetOutput(Translate("CPAC error. Please correct!"));
    dialogHandle_2.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, 10);
    errLabel_8 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      dialogHandle_4.SetOutput(Translate("CPAC error. Please correct!"));
      dialogHandle_4.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, 10);
    }   /* end if from skip handler if no error */
  }   /* end if from skip handler if no error */
  TRUSEQNANO_PROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS2, ML_STAR.MIDI_CPAC, 0, 1, 0, GripperDevice, ML_STAR.COREGripTool);
  if( 0 == Chill_OnCPAC.SetTimer(Timer_Chill_OnCPAC_240s) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  WaitForAndCheckTimer(Chill_OnCPAC);
  MECC::TraceComment(Translate("==================================================================================================================================\nMove IMP to Shaker\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Move IMP to Shaker"));
  onerror goto errLabel_9 ;
  err.Clear();
  TRUSEQNANO_PREP::CheckCPACTemperature(SetTempCPAC, SimOn);
  errLabel_9 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    onerror goto errLabel_10 ;
    err.Clear();
    TRACKLIGHTHELPER::PerformTrackLightCommand(0, TurnLightOnBlinking, ML_STAR);
    if (SendEmail == 1)
    {
      Util::SendEMail(EmailTo, Translate("CPAC check temperature error!"), Translate(""));
    }
    dialogHandle_5.SetOutput(Translate("CPAC error. Please correct!"));
    dialogHandle_5.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, 10);
    errLabel_10 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      dialogHandle_6.SetOutput(Translate("CPAC error. Please correct!"));
      dialogHandle_6.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, 10);
    }   /* end if from skip handler if no error */
  }   /* end if from skip handler if no error */
  TRUSEQNANO_PROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_CPAC, ML_STAR.MIDI_HHS3, 0, 1, 1, GripperDevice, ML_STAR.COREGripTool);
  MECC::TraceComment(Translate("==================================================================================================================================\nTransfer Diluted Beads to IMP - Size Selection Preparation\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Transfer diluted beads to IMP, in preparation for Size Selection"));
  TRUSEQNANO_PROCESSES::Add_AmpureSingle(ML_STAR, ML_STAR.Diluted_SPB, ML_STAR.MIDI_HHS3, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, NumberOfSamples, 160, 1, Translate("2"));
  TRUSEQNANO_PREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  TRUSEQNANO_PREP::Shake(HHS3, 1800, Timer_Shake_120s);
  if( 0 == Incubate_RT_5min.SetTimer(Timer_Incubate_RT_5min) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  Trace ("***** Now incubating at RT for 5min .......");
  WaitForAndCheckTimer(Incubate_RT_5min);
  TRUSEQNANO_PROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS3, ML_STAR.MIDI_OnMagnet, 0, 0, 0, GripperDevice, ML_STAR.COREGripTool);
  if( 0 == WaitingForMagnet.SetTimer(Timer_WaitForMagnet_300) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("==================================================================================================================================\nBring CEP (MIDI) to Deck\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Bring CEP (a MIDI) to deck"));
  TRUSEQNANO_PROCESSES::MoveMIDI(ML_STAR, ML_STAR.Stack2, ML_STAR.MIDI_Pipette, TrackToScanBarcode, 0, 1, GripperDevice, ML_STAR.COREGripTool);
  SeqIncrement(ML_STAR.Stack2, 1);
  Trace ("***** Now incubating at RT for 5min .......");
  AswStatusDialog::AppendText(Translate("   Wait for magnet"));
  WaitForAndCheckTimer(WaitingForMagnet);
  MECC::TraceComment(Translate("==================================================================================================================================\nTransfer Sample from IMP to CEP\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Transfer sample from IMP to CEP"));
  TRUSEQNANO_PROCESSES::Transfer_PlateToPlate(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_Pipette, 250, Translate("Nano_SVF_CleanSample_SurfaceEmpty"), 0, 8);
  TRUSEQNANO_PREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("==================================================================================================================================\nMove IMP to Waste\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Move IMP to waste"));
  TRUSEQNANO_PROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_Waste, 0, 0, 1, GripperDevice, ML_STAR.COREGripTool);
  AswStatusDialog::AppendText(Translate("   Transfer beads to plate"));
  TRUSEQNANO_PROCESSES::Add_AmpureSingle(ML_STAR, ML_STAR._Beads_AMPure, ML_STAR.MIDI_Pipette, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, NumberOfSamples, 30, 1, Translate("3"));
  TRUSEQNANO_PREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  TRUSEQNANO_PROCESSES::MoveHSP(ML_STAR, ML_STAR.MIDI_Pipette, ML_STAR.MIDI_HHS3, 0, 1, GripperDevice, ML_STAR.COREGripTool);
  NumberOfTipsRequired = NumberOfSamples * 4;
  Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 50);
  NumberOfTipsRequired = NumberOfSamples * 3;
  Check_TipQty(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, NumberOfTipsRequired, 300);
  NumberOfTipsRequired = 16;
  Check_TipQty(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, NumberOfTipsRequired, 1000);
  CleanUp(ML_STAR.MIDI_HHS3, ML_STAR.MIDI_Pipette, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_Waste, 0, 0, 300, 20, 1, 1, 300, 0);
  if( 0 == WaitingForMagnet.SetTimer(Timer_WaitForMagnet_300) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("==================================================================================================================================\nBring ALP (MIDI) to Deck\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Bring ALP (a MIDI) to deck"));
  TRUSEQNANO_PROCESSES::MoveMIDI(ML_STAR, ML_STAR.Stack2, ML_STAR.MIDI_Pipette, TrackToScanBarcode, 0, 1, GripperDevice, ML_STAR.COREGripTool);
  SeqIncrement(ML_STAR.Stack2, 1);
  AswStatusDialog::AppendText(Translate("   Wait for magnet"));
  WaitForAndCheckTimer(WaitingForMagnet);
  MECC::TraceComment(Translate("==================================================================================================================================\nTransfer Eluate from CEP to ALP\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Transfer eluate from CEP to ALP"));
  TRUSEQNANO_PROCESSES::Transfer_PlateToPlate(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_Pipette, 17.5, Translate("Nano_50F_CleanSample_SurfaceEmpty"), 0.8, 0.7);
  TRUSEQNANO_PREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("==================================================================================================================================\nMove CEP to Waste\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Move CEP to waste"));
  TRUSEQNANO_PROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_Waste, 0, 0, 1, GripperDevice, ML_STAR.COREGripTool);
  if (AnswerStopPoint == 1)
  {
    MECC::TraceComment(Translate("************************** Stopping Point:  Part 1 now complete **************************"));
    AswStatusDialog::AppendText(Translate("   Stopping Point:  Part 1 now complete"));
  }
  else
  {
    AswStatusDialog::AppendText(Translate("PROCESS 1 COMPLETE - CLEANUP, END REPAIR, SIZE SELECTION"));
  }
  if (SendEmail == 1)
  {
    onerror goto errLabel_11 ;
    err.Clear();
    Util::SendEMail(UserEmailAddress, Translate("Process 1 completed!"), Translate(""));
    errLabel_11 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      Trace ("Email is not setup correctly!");
    }   /* end if from skip handler if no error */
  }
  MECC::TraceComment(Translate("==================================================================================================================================\n\nProcess 1 Finish: Bead Cleanup, End Repair, and Size Selection\n\n=================================================================================================================================="));
}

private function Process2_Adenylate_Ligate_Cleanup(  ) void {
  private timer Incubate_LowTemp;
  private timer WaitingForMagnet;
  private timer Incubate_Cooling;
  private variable Timer_Shake_120s;
  private variable Timer_Incubate_LowTemp_1800s;
  private variable Timer_Incubate_Cooling_300s;
  private variable Timer_Incubate_LowTemp_600s;
  private variable Timer_WaitingForMagnet_300s;
  private dialog dialogHandle_12;
  private variable NumberOfTipsRequired;
  private variable loopCounter6;
  private dialog dialogHandle_13;
  private dialog dialogHandle_14;
  private dialog dialogHandle_15;
  private dialog dialogHandle_16;
  private variable Timer_Incubate_HighTemp_420s;
  private variable Timer_Incubate_HighTemp_180s;
  private timer Incubate_HighTemp_180s;
  private timer Incubate_HighTemp_420s;
  private dialog dialogHandle_17;
  private dialog dialogHandle_18;
  MECC::TraceComment(Translate("==================================================================================================================================\nLocal Variables and Arrays\n=================================================================================================================================="));
  if (SkipAllTimers == 0)
  {
    Timer_Shake_120s = 120;
    Timer_Incubate_LowTemp_1800s = 1800;
    Timer_Incubate_HighTemp_180s = 180;
    Timer_Incubate_HighTemp_420s = 420;
    Timer_Incubate_Cooling_300s = 300;
    Timer_Incubate_LowTemp_600s = 600;
    Timer_WaitingForMagnet_300s = 300;
  }
  else
  {
    Timer_Shake_120s = 1;
    Timer_Incubate_LowTemp_1800s = 1;
    Timer_Incubate_HighTemp_180s = 1;
    Timer_Incubate_HighTemp_420s = 1;
    Timer_Incubate_Cooling_300s = 1;
    Timer_Incubate_LowTemp_600s = 1;
    Timer_WaitingForMagnet_300s = 1;
  }
  MECC::TraceComment(Translate("==================================================================================================================================\n\nProcess 2 Start: Adenylate, Ligate, and Bead Cleanup\n\n=================================================================================================================================="));
  AswStatusDialog::SetStatusText(Translate("Process 2:  Adenylate, Ligate, and Cleanup"));
  if (AnswerStartPoint == 1)
  {
    TRUSEQNANO_PREP::SetHHSTemperature(HHS5, 37);
  }
  if (AnswerAdapterLabware == 1)
  {
    NumberOfTipsRequired = NumberOfSamples * 7;
  }
  else
  {
    NumberOfTipsRequired = NumberOfSamples * 8;
  }
  Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 50);
  NumberOfTipsRequired = NumberOfSamples * 5;
  Check_TipQty(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, NumberOfTipsRequired, 300);
  NumberOfTipsRequired = 16;
  Check_TipQty(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, NumberOfTipsRequired, 1000);
  MECC::TraceComment(Translate("==================================================================================================================================\nTransfer A-Tailing Mix to ALP\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Transfer A-Tailing Mix to ALP"));
  TRUSEQNANO_PROCESSES::Add_ReagentFromVial(ML_STAR, NumberOfSamples, ML_STAR.Vial_ATL, ML_STAR.MIDI_Pipette, ML_STAR.MlStar50ulTipWithFilter, 12.5, Translate("Nano_50F_ATL_SurfaceEmpty"), 5);
  TRUSEQNANO_PREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("==================================================================================================================================\nMove ALP to Shaker and Shake to Mix\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Move ALP to shaker"));
  TRUSEQNANO_PROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_Pipette, ML_STAR.MIDI_HHS3, 0, 0, 1, GripperDevice, ML_STAR.COREGripTool);
  AswStatusDialog::AppendText(Translate("   Shake to mix"));
  TRUSEQNANO_PREP::Shake(HHS3, 1800, Timer_Shake_120s);
  MECC::TraceComment(Translate("==================================================================================================================================\n\n\nINCUBATE - NOT FROM CPAC 37 DEGREES FOR 30 MINUTES 70 DEGREES FOR 10 MINUTES 6 DEGREES FOR 5 MINUTES TO CPAC\n\n\n=================================================================================================================================="));
  MECC::TraceComment(Translate("==================================================================================================================================\nMove ALP to 37 Degree HHS and Incubate\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Move ALP to 37C HHS and incubate"));
  TRUSEQNANO_PREP::GetHHSTemperature(HHS5, 37, SimOn);
  TRUSEQNANO_PROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS3, ML_STAR.MIDI_HHS2, 0, 1, 0, GripperDevice, ML_STAR.COREGripTool);
  if( 0 == Incubate_LowTemp.SetTimer(Timer_Incubate_LowTemp_1800s) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  WaitForAndCheckTimer(Incubate_LowTemp);
  TRUSEQNANO_PREP::GetHHSTemperature(HHS5, 37, SimOn);
  MECC::TraceComment(Translate("==================================================================================================================================\nMove ALP to 70 Degree HHS and Incubate\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Move ALP to 70C HHS and incubate"));
  TRUSEQNANO_PREP::GetHHSTemperature(HHS4, 80, SimOn);
  TRUSEQNANO_PROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS2, ML_STAR.MIDI_HHS1, 0, 1, 0, GripperDevice, ML_STAR.COREGripTool);
  if( 0 == Incubate_HighTemp_180s.SetTimer(Timer_Incubate_HighTemp_180s) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == Incubate_HighTemp_420s.SetTimer(Timer_Incubate_HighTemp_420s) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  Trace ("***** Now incubating at 70C for 420s .......");
  TRUSEQNANO_PREP::SetHHSTemperature(HHS5, 30);
  WaitForAndCheckTimer(Incubate_HighTemp_180s);
  TRUSEQNANO_PREP::GetHHSTemperature(HHS4, 80, SimOn);
  TRUSEQNANO_PREP::SetHHSTemperature(HHS4, 70);
  Trace ("***** Finishing incubating at 70C .......");
  WaitForAndCheckTimer(Incubate_HighTemp_420s);
  TRUSEQNANO_PREP::GetHHSTemperature(HHS4, 70, SimOn);
  MECC::TraceComment(Translate("==================================================================================================================================\nMove ALP to CPAC\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Move ALP to CPAC"));
  onerror goto errLabel_19 ;
  err.Clear();
  TRUSEQNANO_PREP::CheckCPACTemperature(SetTempCPAC, SimOn);
  errLabel_19 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    onerror goto errLabel_20 ;
    err.Clear();
    TRACKLIGHTHELPER::PerformTrackLightCommand(0, TurnLightOnBlinking, ML_STAR);
    if (SendEmail == 1)
    {
      Util::SendEMail(EmailTo, Translate("CPAC check temperature error!"), Translate(""));
    }
    dialogHandle_18.SetOutput(Translate("CPAC error. Please correct!"));
    dialogHandle_18.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, 10);
    errLabel_20 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      dialogHandle_17.SetOutput(Translate("CPAC error. Please correct!"));
      dialogHandle_17.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, 10);
    }   /* end if from skip handler if no error */
  }   /* end if from skip handler if no error */
  TRUSEQNANO_PROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS1, ML_STAR.MIDI_CPAC, 0, 1, 0, GripperDevice, ML_STAR.COREGripTool);
  if( 0 == Incubate_Cooling.SetTimer(Timer_Incubate_Cooling_300s) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  WaitForAndCheckTimer(Incubate_Cooling);
  MECC::TraceComment(Translate("==================================================================================================================================\nMove ALP to Shaker\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Move ALP to Shaker"));
  TRUSEQNANO_PROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_CPAC, ML_STAR.MIDI_HHS3, 0, 1, 0, GripperDevice, ML_STAR.COREGripTool);
  MECC::TraceComment(Translate("==================================================================================================================================\nAdd RSB\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Add RSB"));
  TRUSEQNANO_PROCESSES::Add_RSB(ML_STAR, ML_STAR._RSB, ML_STAR.MIDI_HHS3, ML_STAR.MlStar50ulTipWithFilter, 2.5, 1, 5);
  TRUSEQNANO_PREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  {
    for(loopCounter6 = 0; loopCounter6 < 0;)
    {
      loopCounter6 = loopCounter6 + 1;
      MECC::TraceComment(Translate("********** Load LIG ............."));
      AswStatusDialog::AppendText(Translate("   Load LIG"));
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      dialogHandle_13.SetOutput(Translate("Load a 2 mL vial of LIG2 into position 19 of the unloaded sample tube carrier on track 33."));
      dialogHandle_13.ShowOutput(Translate("Load Ligation Mix 2"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
  }
  MECC::TraceComment(Translate("==================================================================================================================================\nAdd Ligation Reagent\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Add LIG"));
  TRUSEQNANO_PROCESSES::Add_ReagentFromVial(ML_STAR, NumberOfSamples, ML_STAR.Vial_LIG, ML_STAR.MIDI_HHS3, ML_STAR.MlStar50ulTipWithFilter, 2.5, Translate("Nano_50F_LIG_SurfaceEmpty"), 5);
  TRUSEQNANO_PREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("==================================================================================================================================\nAdd Adapters\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Add Adapters"));
  Util2::Debug::TraceArray(Translate("array_Index1Positions: "), array_Index1Positions);
  Util2::Debug::TraceArray(Translate("array_Index2Positions: "), array_Index2Positions);
  Util2::Debug::TraceArray(Translate("array_ALPPositions: "), array_ALPPositions);
  if (AnswerAdapterLabware == 1)
  {
    MECC::TraceComment(Translate("********** Using the DAP plate **********"));
    AswStatusDialog::AppendText(Translate("      Using the DAP plate"));
    TRUSEQNANO_PROCESSES::Add_AdaptersViaDAP(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.DAP_Plate, ML_STAR.MIDI_HHS3, array_Index1Positions, array_Index2Positions, array_ALPPositions);
    TRUSEQNANO_PREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  }
  else
  {
    MECC::TraceComment(Translate("********** Using Adapters in Vials **********"));
    AswStatusDialog::AppendText(Translate("      Using Adapters in Vials"));
    TRUSEQNANO_PROCESSES::Add_AdaptersViaVials(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.AdapterVials_UniquePerRun, ML_STAR.MIDI_HHS3, NumberOfIndexes, array_Index1Positions, array_Index2Positions, array_ALPPositions);
    TRUSEQNANO_PREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  }
  MECC::TraceComment(Translate("==================================================================================================================================\nShake to Mix\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Shake to mix"));
  TRUSEQNANO_PREP::Shake(HHS3, 1800, Timer_Shake_120s);
  MECC::TraceComment(Translate("==================================================================================================================================\nMove ALP to 30 Degree HHS and Incubate\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Move ALP to 30C HHS and incubate"));
  TRUSEQNANO_PREP::GetHHSTemperature(HHS5, 30, SimOn);
  TRUSEQNANO_PROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS3, ML_STAR.MIDI_HHS2, 0, 1, 0, GripperDevice, ML_STAR.COREGripTool);
  if( 0 == Incubate_LowTemp.SetTimer(Timer_Incubate_LowTemp_600s) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  WaitForAndCheckTimer(Incubate_LowTemp);
  TRUSEQNANO_PREP::GetHHSTemperature(HHS5, 30, SimOn);
  MECC::TraceComment(Translate("==================================================================================================================================\nMove ALP to CPAC\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Move ALP to CPAC for cool-down"));
  onerror goto errLabel_21 ;
  err.Clear();
  TRUSEQNANO_PREP::CheckCPACTemperature(SetTempCPAC, SimOn);
  errLabel_21 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    if (SendEmail == 1)
    {
      Util::SendEMail(EmailTo, Translate("CPAC check temperature error!"), Translate(""));
    }
    onerror goto errLabel_22 ;
    err.Clear();
    dialogHandle_15.SetOutput(Translate("CPAC error. Please correct!"));
    dialogHandle_15.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, 60);
    errLabel_22 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      dialogHandle_12.SetOutput(Translate("CPAC error. Please correct!"));
      dialogHandle_12.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, 60);
    }   /* end if from skip handler if no error */
  }   /* end if from skip handler if no error */
  TRUSEQNANO_PROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS2, ML_STAR.MIDI_CPAC, 0, 1, 0, GripperDevice, ML_STAR.COREGripTool);
  if( 0 == Incubate_Cooling.SetTimer(Timer_Incubate_Cooling_300s) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  WaitForAndCheckTimer(Incubate_Cooling);
  MECC::TraceComment(Translate("==================================================================================================================================\nMove ALP to Shaker, Add Ligation Stop Buffer, and Shake to Mix\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Move ALP to Shaker"));
  TRUSEQNANO_PROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_CPAC, ML_STAR.MIDI_HHS3, 0, 1, 0, GripperDevice, ML_STAR.COREGripTool);
  AswStatusDialog::AppendText(Translate("   Add Stop Ligation Buffer"));
  TRUSEQNANO_PROCESSES::Add_ReagentFromVial(ML_STAR, NumberOfSamples, ML_STAR.Vial_STL, ML_STAR.MIDI_HHS3, ML_STAR.MlStar50ulTipWithFilter, 5, Translate("Nano_50F_STL_SurfaceEmpty"), 5);
  TRUSEQNANO_PREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  AswStatusDialog::AppendText(Translate("   Shake to mix"));
  TRUSEQNANO_PREP::Shake(HHS3, 1800, Timer_Shake_120s);
  MECC::TraceComment(Translate("==================================================================================================================================\nTransfer Beads to ALP and Prepare for Cleanup\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Transfer beads to ALP, in preparation for Cleanup"));
  TRUSEQNANO_PROCESSES::Add_AmpureSingle(ML_STAR, ML_STAR._Beads_AMPure, ML_STAR.MIDI_HHS3, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, NumberOfSamples, 42.5, 1, Translate("4"));
  TRUSEQNANO_PREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  CleanUp(ML_STAR.MIDI_HHS3, ML_STAR.MIDI_HHS3, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_Waste, 0, 0, 85, 52.5, 1, 1, 300, 0);
  if( 0 == WaitingForMagnet.SetTimer(Timer_WaitingForMagnet_300s) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("==================================================================================================================================\nBring CAP (MIDI) to Deck\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Bring CAP (a MIDI) to deck"));
  TRUSEQNANO_PROCESSES::MoveMIDI(ML_STAR, ML_STAR.Stack3, ML_STAR.MIDI_Pipette, TrackToScanBarcode, 0, 1, GripperDevice, ML_STAR.COREGripTool);
  SeqIncrement(ML_STAR.Stack3, 1);
  AswStatusDialog::AppendText(Translate("   Wait for magnet"));
  WaitForAndCheckTimer(WaitingForMagnet);
  MECC::TraceComment(Translate("==================================================================================================================================\nCleanup 1 Complete\n=================================================================================================================================="));
  NumberOfTipsRequired = NumberOfSamples * 4;
  Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 50);
  NumberOfTipsRequired = NumberOfSamples * 4;
  Check_TipQty(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, NumberOfTipsRequired, 300);
  NumberOfTipsRequired = 16;
  Check_TipQty(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, NumberOfTipsRequired, 1000);
  MECC::TraceComment(Translate("==================================================================================================================================\nTransfer Beads to CAP and Prepare for Cleanup\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Transfer beads to CAP, in preparation for Cleanup"));
  TRUSEQNANO_PROCESSES::Add_AmpureSingle(ML_STAR, ML_STAR._Beads_AMPure, ML_STAR.MIDI_Pipette, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, NumberOfSamples, 50, 1, Translate("5"));
  TRUSEQNANO_PREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("==================================================================================================================================\nBead Cleanup\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Cleanup"));
  CleanUp(ML_STAR.MIDI_Pipette, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_Waste, 1, 50, 100, 27.5, 1, 1, 300, 1);
  if( 0 == WaitingForMagnet.SetTimer(Timer_WaitingForMagnet_300s) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("==================================================================================================================================\nBring PCR (HSP) to Deck\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Bring PCR (an HSP) to deck"));
  TRUSEQNANO_PROCESSES::MoveHSP(ML_STAR, ML_STAR.Stack4, ML_STAR.HSP_Pipette, TrackToScanBarcode, 1, GripperDevice, ML_STAR.COREGripTool);
  SeqIncrement(ML_STAR.Stack4, 1);
  AswStatusDialog::AppendText(Translate("   Wait for magnet"));
  WaitForAndCheckTimer(WaitingForMagnet);
  MECC::TraceComment(Translate("==================================================================================================================================\nTransfer Sample from CAP to PCR\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Transfer Sample from CAP to PCR"));
  TRUSEQNANO_PROCESSES::Transfer_PlateToPlate(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MIDI_OnMagnet, ML_STAR.HSP_Pipette, 25, Translate("Nano_50F_CleanSample_SurfaceEmpty"), 0.5, 1);
  TRUSEQNANO_PREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("==================================================================================================================================\nMove CAP to Waste\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Move CAP to Waste"));
  TRUSEQNANO_PROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_Waste, 0, 0, 1, GripperDevice, ML_STAR.COREGripTool);
  MECC::TraceComment(Translate("==================================================================================================================================\nCleanup 2 Complete\n=================================================================================================================================="));
  if (AnswerStopPoint == 2)
  {
    MECC::TraceComment(Translate("************************** Stopping Point:  Cleanup 2 now complete **************************"));
    AswStatusDialog::AppendText(Translate("   Stopping Point:  Cleanup 2 now complete"));
  }
  else
  {
    AswStatusDialog::AppendText(Translate("PROCESS 2  COMPLETE- ADENYLATE, LIGATE, AND CLEANUP"));
  }
  if (SendEmail == 1)
  {
    onerror goto errLabel_23 ;
    err.Clear();
    Util::SendEMail(UserEmailAddress, Translate("Process 2 completed!"), Translate(""));
    errLabel_23 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      Trace ("Email is not setup correctly!");
    }   /* end if from skip handler if no error */
  }
  MECC::TraceComment(Translate("==================================================================================================================================\n\nProcess 2 Finish: Adenylate, Ligate, and Bead Cleanup\n\n=================================================================================================================================="));
}

private function Process3_PCRPrep(  ) void {
  private variable Timer_Shake_20s;
  private dialog dialogHandle_24;
  private variable NumberOfTipsRequired;
  private dialog dialogHandle_25;
  MECC::TraceComment(Translate("==================================================================================================================================\nLocal Variables and Arrays\n=================================================================================================================================="));
  if (SkipAllTimers == 0)
  {
    Timer_Shake_20s = 20;
  }
  else
  {
    Timer_Shake_20s = 1;
  }
  MECC::TraceComment(Translate("==================================================================================================================================\n\nProcess 3 Start: PCR Preparation\n\n=================================================================================================================================="));
  AswStatusDialog::SetStatusText(Translate("Process 3:  PCR Prep"));
  NumberOfTipsRequired = NumberOfSamples * 2;
  Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 50);
  MECC::TraceComment(Translate("==================================================================================================================================\nAdd PPC to PCR Plate\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Add PPC to PCR Plate"));
  TRUSEQNANO_PROCESSES::Add_ReagentFromVial(ML_STAR, NumberOfSamples, ML_STAR.Vial_PPC, ML_STAR.HSP_Pipette, ML_STAR.MlStar50ulTipWithFilter, 5, Translate("Nano_50F_PPC_SurfaceEmpty"), 5);
  TRUSEQNANO_PREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("==================================================================================================================================\nAdd EPM to PCR Plate\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Add EPM"));
  TRUSEQNANO_PROCESSES::Add_ReagentFromVial(ML_STAR, NumberOfSamples, ML_STAR.Vial_EPM, ML_STAR.HSP_Pipette, ML_STAR.MlStar50ulTipWithFilter, 20, Translate("Nano_50F_EPM_SurfaceEmpty"), 5);
  TRUSEQNANO_PREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("==================================================================================================================================\nMove PCR to Shaker and Shake to Mix\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Move PCR Plate to Shaker"));
  TRUSEQNANO_PROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_Pipette, ML_STAR.HSP_HHS3, 0, 1, GripperDevice, ML_STAR.COREGripTool);
  AswStatusDialog::AppendText(Translate("   Shake to mix"));
  TRUSEQNANO_PREP::Shake(HHS3, 1600, Timer_Shake_20s);
  MECC::TraceComment(Translate("==================================================================================================================================\nMove PCR Back to Carrier and Unload\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Move PCR Plate back to carrier"));
  TRUSEQNANO_PROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_HHS3, ML_STAR.HSP_Pipette, 0, 1, GripperDevice, ML_STAR.COREGripTool);
  AswStatusDialog::AppendText(Translate("   Unload carrier"));
  dialogHandle_25.SetOutput(Translate("HSP plate will now be unloaded for PCR amplification."));
  dialogHandle_25.ShowOutput(Translate("Carrier Unload"), hslOKOnly | hslInformation | hslDefButton1, 150);
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  if (AnswerStopPoint == 3)
  {
    MECC::TraceComment(Translate("************************** Stopping Point:  PCR Prep now complete **************************"));
    AswStatusDialog::AppendText(Translate("   Stopping Point:  PCR Prep now complete"));
  }
  else
  {
    AswStatusDialog::AppendText(Translate("PROCESS 3 COMPLETE- PCR PREPARATION"));
  }
  if (SendEmail == 1)
  {
    onerror goto errLabel_26 ;
    err.Clear();
    Util::SendEMail(UserEmailAddress, Translate("Process 3 completed!"), Translate(""));
    errLabel_26 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      Trace ("Email is not setup correctly!");
    }   /* end if from skip handler if no error */
  }
  MECC::TraceComment(Translate("==================================================================================================================================\n\nProcess 3 Finish: PCR Preparation\n\n=================================================================================================================================="));
}

private function Process5_NormalizePool(  ) void {
  private dialog dialogHandle_27;
  private dialog dialogHandle_28;
  private variable NumberOfTipsRequired;
  private variable Timer_Shake_120s;
  private dialog dialogHandle_29;
  private dialog dialogHandle_30;
  MECC::TraceComment(Translate("==================================================================================================================================\nLocal Variables and Arrays\n=================================================================================================================================="));
  if (SkipAllTimers == 0)
  {
    Timer_Shake_120s = 120;
  }
  else
  {
    Timer_Shake_120s = 1;
  }
  MECC::TraceComment(Translate("==================================================================================================================================\n\nProcess 5 Start: Normalization and Pooling\n\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("Process 5:  Normalize and Pool"));
  MECC::TraceComment(Translate("==================================================================================================================================\nNormalize Steps\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("NORMALIZE"));
  if (AnswerPooling == 1)
  {
    NumberOfTipsRequired = NumberOfSamples * 2;
    Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 50);
  }
  else
  {
    NumberOfTipsRequired = NumberOfSamples * 1;
    Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 50);
  }
  NumberOfTipsRequired = NumberOfSamples * 2;
  Check_TipQty(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, NumberOfTipsRequired, 300);
  if (AnswerStartPoint < 5)
  {
    dialogHandle_29.SetOutput(Translate("When you have completed Library Validation,"), "\n", Translate("place the TSP1 plate back onto the Plate-Tip carrier (on the 4th position from the rear)."), Translate("\n\nAlso load TRIS-Tween buffer in the reagent carrier on track 30 (4th position)."), Translate("\n\nWhen ready, click OK to load the carriers."));
    dialogHandle_29.ShowOutput(Translate("Ready for Normalization"), hslOKOnly | hslQuestion | hslDefButton1, hslInfinite);
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    dialogHandle_30.SetInputSize(1);
    dialogHandle_30.SetInputField(0, Translate("Please browse for and select the normalization worklist."), hslString, "C:\Illumina\Files");
    dialogHandle_30.ShowInput(Translate("Normalization"), hslInfinite, hslOKOnly | hslDefButton1);
    File_Normalization = dialogHandle_30.GetInputField(0);
    Trace ("***** Normalization File selected:  ", File_Normalization);
  }
  MECC::TraceComment(Translate("==================================================================================================================================\nBring DCT (MIDI) to Deck\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Bring DCT (a MIDI) to deck"));
  TRUSEQNANO_PROCESSES::MoveMIDI(ML_STAR, ML_STAR.Stack3, ML_STAR.MIDI_HHS3, TrackToScanBarcode, 0, 1, GripperDevice, ML_STAR.COREGripTool);
  AswStatusDialog::AppendText(Translate("   Now diluting samples"));
  TRUSEQNANO_PROCESSES::Normalize(ML_STAR, File_Normalization, ML_STAR._Tris, ML_STAR.HSP_Pipette, ML_STAR.MIDI_HHS3, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("Nano_SVF_Tris_SurfaceEmpty"), Translate("Nano_50F_RSB_SurfaceEmpty"), ML_STAR.MIDI_PipetteBuffer, ML_STAR.HSP_PoolingPlate_OnHHS3);
  TRUSEQNANO_PREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  AswStatusDialog::AppendText(Translate("   Shaking"));
  TRUSEQNANO_PREP::Shake(HHS3, 1000, Timer_Shake_120s);
  AswStatusDialog::AppendText(Translate("   Move to carrier"));
  TRUSEQNANO_PROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS3, ML_STAR.MIDI_Pipette, 0, 0, 1, GripperDevice, ML_STAR.COREGripTool);
  if (AnswerPooling == 1)
  {
    MECC::TraceComment(Translate("==================================================================================================================================\nPooling\n=================================================================================================================================="));
    AswStatusDialog::AppendText(Translate("POOL"));
    MECC::TraceComment(Translate("==================================================================================================================================\nBring PDP (HSP) to Deck\n=================================================================================================================================="));
    AswStatusDialog::AppendText(Translate("   Bring PDP (an HSP) to deck"));
    TRUSEQNANO_PROCESSES::MoveHSP(ML_STAR, ML_STAR.Stack4, ML_STAR.HSP_HHS3, TrackToScanBarcode, 1, GripperDevice, ML_STAR.COREGripTool);
    AswStatusDialog::AppendText(Translate("   Now pooling"));
    TRUSEQNANO_PROCESSES::Pool(ML_STAR, ML_STAR.MIDI_Pipette, ML_STAR.HSP_PoolingPlate_OnHHS3, ML_STAR.MlStar50ulTipWithFilter, Translate("Nano_50F_RSB_SurfaceEmpty"), 1, 0, File_Normalization);
    TRUSEQNANO_PREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
    AswStatusDialog::AppendText(Translate("   Shaking"));
    TRUSEQNANO_PREP::Shake(HHS3, 1800, Timer_Shake_120s);
    AswStatusDialog::AppendText(Translate("   Move to carrier"));
    if (RunProcess2 == 1)
    {
      if (AnswerAdapterLabware == 2)
      {
        TRUSEQNANO_PROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_HHS3, ML_STAR.HSP_Pipette2, 0, 1, GripperDevice, ML_STAR.COREGripTool);
      }
      else
      {
        MECC::TraceComment(Translate("**** PDP will stay on the HHS, since the DAP plate is on the plate-tip carrier (i.e., no open positions for the PDP on that carrier) ****"));
        AswStatusDialog::AppendText(Translate("   PDP will stay on the HHS, since the DAP plate is on the plate-tip carrier (i.e., no open positions for the PDP on that carrier)"));
      }
    }
    else
    {
      TRUSEQNANO_PROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_HHS3, ML_STAR.HSP_Pipette2, 0, 1, GripperDevice, ML_STAR.COREGripTool);
    }
  }
  if (AnswerStopPoint == 5)
  {
    MECC::TraceComment(Translate("************************** Stopping Point:  Normalize and Pool now complete **************************"));
    AswStatusDialog::AppendText(Translate("   Stopping Point:  Normalize and Pool now complete"));
  }
  MECC::TraceComment(Translate("==================================================================================================================================\n\nProcess 5 Finish: Normalization and Pooling\n\n=================================================================================================================================="));
}

private function CleanUp( sequence & seq_BeadDestination, sequence & seq_SampleSourcePosition, sequence & seq_PlateOnMagnet, sequence & seq_PlateWastePosition, variable var_TransferFromHSPtoMIDI, variable var_VolumeSample, variable var_VolumeSupernatant, variable var_ResuspensionBuffer, variable var_SamplePlateType, variable var_BeadPlateType, variable var_MagnetWaitTime, variable var_MoveToShaker ) void {
  private variable loopCounter5;
  private timer WaitForMagnet;
  private timer Incubate_RT_2min;
  private timer EvaporationTime;
  private timer Incubate_RT_5min;
  private variable TImer_Incubate_RT_5min;
  private variable Timer_Shake_120s;
  private variable Timer_EvaporationTime_300;
  private variable Timer_Incubate_RT_2min;
  if (SkipAllTimers == 0)
  {
    Timer_Shake_120s = 120;
    TImer_Incubate_RT_5min = 300;
    Timer_Incubate_RT_2min = 120;
    Timer_EvaporationTime_300 = 300;
  }
  else
  {
    Timer_Shake_120s = 1;
    TImer_Incubate_RT_5min = 1;
    Timer_Incubate_RT_2min = 1;
    Timer_EvaporationTime_300 = 1;
    var_MagnetWaitTime = 1;
  }
  MECC::TraceComment(Translate("******************** SUBMETHOD START:  CLEANUP ********************"));
  AswStatusDialog::AppendText(Translate("START CLEANUP"));
  if (var_TransferFromHSPtoMIDI == 1)
  {
    MECC::TraceComment(Translate("********** Transfer sample to plate with beads........"));
    AswStatusDialog::AppendText(Translate("   Transfer sample to plate with beads"));
    TRUSEQNANO_PROCESSES::Transfer_PlateToPlate(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, seq_SampleSourcePosition, seq_BeadDestination, var_VolumeSample, Translate("Nano_50F_SampleForCleanup_SurfaceEmpty"), 0, 1.6);
    TRUSEQNANO_PREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  }
  if (var_MoveToShaker == 1)
  {
    AswStatusDialog::AppendText(Translate("   Move to shaker"));
    ML_STAR.MIDI_HHS3.SetCurrentPosition(1);
    TRUSEQNANO_PROCESSES::MoveMIDI(ML_STAR, seq_BeadDestination, ML_STAR.MIDI_HHS3, 0, 0, 1, GripperDevice, ML_STAR.COREGripTool);
  }
  AswStatusDialog::AppendText(Translate("   Shake"));
  TRUSEQNANO_PREP::Shake(HHS3, 1800, Timer_Shake_120s);
  AswStatusDialog::AppendText(Translate("   Incubate"));
  if( 0 == Incubate_RT_5min.SetTimer(TImer_Incubate_RT_5min) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  Trace ("***** Now incubating at RT for 5min .......");
  if (var_TransferFromHSPtoMIDI == 1)
  {
    MECC::TraceComment(Translate("**********  Now move to waste.............."));
    AswStatusDialog::AppendText(Translate("   Now move to waste"));
    if (var_SamplePlateType == 1)
    {
      TRUSEQNANO_PROCESSES::MoveMIDI(ML_STAR, seq_SampleSourcePosition, seq_PlateWastePosition, 0, 0, 0, GripperDevice, ML_STAR.COREGripTool);
    }
    else
    {
      TRUSEQNANO_PROCESSES::MoveHSP(ML_STAR, seq_SampleSourcePosition, seq_PlateWastePosition, 0, 0, GripperDevice, ML_STAR.COREGripTool);
    }
  }
  WaitForAndCheckTimer(Incubate_RT_5min);
  MECC::TraceComment(Translate("********** Now move to magnet .............."));
  AswStatusDialog::AppendText(Translate("   Now move to magnet"));
  if (var_BeadPlateType == 1)
  {
    TRUSEQNANO_PROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS3, ML_STAR.MIDI_OnMagnet, 0, 0, 1, GripperDevice, ML_STAR.COREGripTool);
  }
  else
  {
    TRUSEQNANO_PROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_OnMagnet, ML_STAR.HSP_OnMagnet, 0, 1, GripperDevice, ML_STAR.COREGripTool);
  }
  AswStatusDialog::AppendText(Translate("   Wait for magnet"));
  if( 0 == WaitForMagnet.SetTimer(var_MagnetWaitTime) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  WaitForAndCheckTimer(WaitForMagnet);
  MECC::TraceComment(Translate("********** Remove supernatant to waste ........"));
  AswStatusDialog::AppendText(Translate("   Remove supernatant to waste"));
  TRUSEQNANO_PROCESSES::Transfer_PlatetoWaste(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, seq_PlateOnMagnet, ML_STAR.LiquidWaste, var_VolumeSupernatant, Translate("Nano_SVF_Waste_JetEmpty"));
  TRUSEQNANO_PREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  {
    for(loopCounter5 = 0; loopCounter5 < 2;)
    {
      loopCounter5 = loopCounter5 + 1;
      AswStatusDialog::AppendText(Translate("   Add ethanol"));
      TRUSEQNANO_PROCESSES::Add_Ethanol(ML_STAR, NumberOfSamples, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, ML_STAR._EtOH_80, seq_PlateOnMagnet, Translate("Nano_HVF_80PercentEtOH_JetPart"), TrackingEthanolVolume_80, SkipAllTimers, UserEmailAddress);
      TRUSEQNANO_PREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
      MECC::TraceComment(Translate("********** Remove ethanol supernatant to waste ........"));
      AswStatusDialog::AppendText(Translate("   Remove ethanol supernatant to waste"));
      TRUSEQNANO_PROCESSES::Transfer_PlatetoWaste(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, seq_PlateOnMagnet, ML_STAR.LiquidWaste, 200, Translate("Nano_SVF_EthanolWaste_JetEmpty_HigherAirTransport"));
      TRUSEQNANO_PREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
    }
  }
  if( 0 == EvaporationTime.SetTimer(Timer_EvaporationTime_300) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("********** Remove residual ethanol  ........"));
  AswStatusDialog::AppendText(Translate("   Remove residual ethanol"));
  TRUSEQNANO_PROCESSES::Remove_ResidualEtOH(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, seq_PlateOnMagnet);
  TRUSEQNANO_PREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  AswStatusDialog::AppendText(Translate("   Evaporation"));
  Trace ("***** Now waiting for ethanol evaporation .......");
  WaitForAndCheckTimer(EvaporationTime);
  MECC::TraceComment(Translate("********** Now pipetting resuspension buffer .............."));
  AswStatusDialog::AppendText(Translate("   Now pipetting resuspension buffer"));
  if (var_ResuspensionBuffer <= 50)
  {
    TRUSEQNANO_PROCESSES::Add_RSB(ML_STAR, ML_STAR._RSB, seq_PlateOnMagnet, ML_STAR.MlStar50ulTipWithFilter, var_ResuspensionBuffer, 0, 3);
    TRUSEQNANO_PREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  }
  else
  {
    TRUSEQNANO_PROCESSES::Add_RSB(ML_STAR, ML_STAR._RSB, seq_PlateOnMagnet, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, var_ResuspensionBuffer, 0, 3);
    TRUSEQNANO_PREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  }
  MECC::TraceComment(Translate("********** Now move to shaker .............."));
  AswStatusDialog::AppendText(Translate("   Now move to shaker"));
  if (var_BeadPlateType == 1)
  {
    TRUSEQNANO_PROCESSES::MoveMIDI(ML_STAR, seq_PlateOnMagnet, ML_STAR.MIDI_HHS3, 0, 0, 0, GripperDevice, ML_STAR.COREGripTool);
  }
  else
  {
    TRUSEQNANO_PROCESSES::MoveHSP(ML_STAR, seq_PlateOnMagnet, ML_STAR.HSP_HHS3, 0, 0, GripperDevice, ML_STAR.COREGripTool);
  }
  AswStatusDialog::AppendText(Translate("   Shake then incubate"));
  TRUSEQNANO_PREP::Shake(HHS3, 1800, Timer_Shake_120s);
  if( 0 == Incubate_RT_2min.SetTimer(Timer_Incubate_RT_2min) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  Trace ("***** Now incubating at RT for 120s .......");
  WaitForAndCheckTimer(Incubate_RT_2min);
  MECC::TraceComment(Translate("********** Now move to magnet .............."));
  AswStatusDialog::AppendText(Translate("   Now move to magnet"));
  if (var_BeadPlateType == 1)
  {
    TRUSEQNANO_PROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_HHS3, ML_STAR.MIDI_OnMagnet, 0, 0, 0, GripperDevice, ML_STAR.COREGripTool);
  }
  else
  {
    TRUSEQNANO_PROCESSES::MoveHSP(ML_STAR, ML_STAR.HSP_HHS3, ML_STAR.HSP_OnMagnet, 0, 0, GripperDevice, ML_STAR.COREGripTool);
  }
  MECC::TraceComment(Translate("******************** SUBMETHOD COMPLETE:  CLEANUP ********************"));
  AswStatusDialog::AppendText(Translate("CLEANUP COMPLETE"));
}

private function WaitForAndCheckTimer( timer & IncubationTimer ) void {
  private variable ActualElapsedTime;
  Trace ("**********************************");
  Trace ("***** Waiting for timer........");
  Trace ("**********************************");
  TimerWasStopped = IncubationTimer.WaitTimer(hslTrue, hslTrue);
  if (0 == TimerWasStopped)
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if (TimerWasStopped == 3)
  {
    MECC::TraceComment(Translate("***** WARNING!  The timer was stopped prematurely! *****"));
  }
  ActualElapsedTime = IncubationTimer.GetElapsedTime();
  Trace ("***** Actual Elapsed Time (seconds):  ", ActualElapsedTime, "        *****");
}

private function Process4_PCR_Cleanup(  ) void {
  private dialog customDialog_31;
  private variable Answer_PCR_Yes;
  private timer WaitingForMagnet;
  private variable BeadVolume;
  private variable Timer_WaitingForMagnet_300s;
  private variable NumberOfTipsRequired;
  private dialog customDialog_32;
  private variable retValueDialog;
  private dialog dialogHandle_33;
  private dialog dialogHandle_34;
  private dialog dialogHandle_35;
  MECC::TraceComment(Translate("==================================================================================================================================\nLocal Variables and Arrays\n=================================================================================================================================="));
  if (SkipAllTimers == 0)
  {
    Timer_WaitingForMagnet_300s = 300;
  }
  else
  {
    Timer_WaitingForMagnet_300s = 1;
  }
  MECC::TraceComment(Translate("==================================================================================================================================\n\nProcess 4 Start: PCR Cleanup\n\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("Process 4:  PCR Cleanup"));
  customDialog_32.InitCustomDialog("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");
  customDialog_32.ShowCustomDialog();
  retValueDialog = customDialog_32.GetCustomDialogProperty( "ReturnValue" );
  Answer_PCR_Yes = customDialog_32.GetCustomDialogProperty( "radioButton1.IsChecked" );
  if (Answer_PCR_Yes == 0)
  {
    MECC::TraceComment(Translate("########## User confirmed that PCR thermal cycling had NOT been performed on this batch of samples ##########"));
    AswStatusDialog::AppendText(Translate("   User confirmed that PCR thermal cycling had NOT been performed on this batch of samples"));
    customDialog_31.InitCustomDialog("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");
    customDialog_31.ShowCustomDialog();
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    abort;
  }
  else
  {
    MECC::TraceComment(Translate("*********** User confirmed that PCR thermal cycling had been performed on this batch of samples. *********** "));
    AswStatusDialog::AppendText(Translate("   User confirmed that PCR thermal cycling had been performed on this batch of samples."));
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  }
  NumberOfTipsRequired = NumberOfSamples * 4;
  Check_TipQty(ML_STAR.MlStar50ulTipWithFilter, NumberOfTipsRequired, 50);
  NumberOfTipsRequired = NumberOfSamples * 4;
  Check_TipQty(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, NumberOfTipsRequired, 300);
  NumberOfTipsRequired = 16;
  Check_TipQty(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, NumberOfTipsRequired, 1000);
  MECC::TraceComment(Translate("==================================================================================================================================\nBring CPP (MIDI) to Deck\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Bring CPP (a MIDI) to deck"));
  TRUSEQNANO_PROCESSES::MoveMIDI(ML_STAR, ML_STAR.Stack3, ML_STAR.MIDI_HHS3, TrackToScanBarcode, 0, 1, GripperDevice, ML_STAR.COREGripTool);
  SeqIncrement(ML_STAR.Stack3, 1);
  MECC::TraceComment(Translate("==================================================================================================================================\nTransfer Beads to CPP\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Transfer beads to CPP"));
  if (AnswerAdapterLabware == 1)
  {
    BeadVolume = 47.5;
  }
  else
  {
    BeadVolume = 50;
  }
  TRUSEQNANO_PROCESSES::Add_AmpureSingle(ML_STAR, ML_STAR._Beads_AMPure, ML_STAR.MIDI_HHS3, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, NumberOfSamples, BeadVolume, 0, Translate("6"));
  TRUSEQNANO_PREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("==================================================================================================================================\nBead Cleanup\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Cleanup"));
  CleanUp(ML_STAR.MIDI_HHS3, ML_STAR.HSP_Pipette, ML_STAR.MIDI_OnMagnet, ML_STAR.HSP_Waste, 1, 50, 95, 32.5, 2, 1, 300, 0);
  if( 0 == WaitingForMagnet.SetTimer(Timer_WaitingForMagnet_300s) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("==================================================================================================================================\nBring TSP1 (HSP) to Deck\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Bring TSP1 (an HSP) to deck"));
  TRUSEQNANO_PROCESSES::MoveHSP(ML_STAR, ML_STAR.Stack4, ML_STAR.HSP_Pipette, TrackToScanBarcode, 1, GripperDevice, ML_STAR.COREGripTool);
  SeqIncrement(ML_STAR.Stack4, 1);
  WaitForAndCheckTimer(WaitingForMagnet);
  MECC::TraceComment(Translate("==================================================================================================================================\nTransfer Samples from CPP to TSP1\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Transfer samples from CPP to TSP1"));
  TRUSEQNANO_PROCESSES::Transfer_PlateToPlate(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MIDI_OnMagnet, ML_STAR.HSP_Pipette, 30, Translate("Nano_50F_CleanSample_SurfaceEmpty"), 0, 1);
  TRUSEQNANO_PREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  MECC::TraceComment(Translate("==================================================================================================================================\nMove CPP to Waste\n=================================================================================================================================="));
  AswStatusDialog::AppendText(Translate("   Move CPP to waste"));
  TRUSEQNANO_PROCESSES::MoveMIDI(ML_STAR, ML_STAR.MIDI_OnMagnet, ML_STAR.MIDI_Waste, 0, 0, 0, GripperDevice, ML_STAR.COREGripTool);
  if (AnswerStopPoint == 4)
  {
    MECC::TraceComment(Translate("************************** Stopping Point:  PCR Cleanup now complete **************************"));
    AswStatusDialog::AppendText(Translate("   Stopping Point:  PCR Cleanup now complete"));
  }
  else
  {
    MECC::TraceComment(Translate("************************** Offline Library Validation............................."));
    AswStatusDialog::AppendText(Translate("   Offline Library Validation..."));
    dialogHandle_34.SetOutput(Translate("The samples are ready for Library Validation."), "\n", Translate("\nClick OK to have the TSP1 plate and reagent carrier unloaded from the deck."));
    dialogHandle_34.ShowOutput(Translate("Ready for Offline Library Validation"), hslOKOnly | hslInformation | hslDefButton1, 60);
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    AswStatusDialog::AppendText(Translate("PROCESS 4 COMPLETE - PCR CLEANUP"));
  }
  if (SendEmail == 1)
  {
    onerror goto errLabel_36 ;
    err.Clear();
    Util::SendEMail(UserEmailAddress, Translate("Process 4 completed!"), Translate(""));
    errLabel_36 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      Trace ("Email is not setup correctly!");
    }   /* end if from skip handler if no error */
  }
  MECC::TraceComment(Translate("==================================================================================================================================\n\nProcess 4 Finish: PCR Cleanup\n\n=================================================================================================================================="));
}

private function CalculateResources(  ) void {
  private dialog customDialog_37;
  private variable PlatesInStack4_4;
  private variable Vol_RSB_mL;
  private variable TipsPerSample_1000_1;
  private variable RacksOf50s;
  private variable PlatesInStack3_5;
  private variable Vol_ELB2;
  private variable TipsPerSample_1000_2;
  private variable ExtraTips50;
  private variable Vol_STL2;
  private variable ExtraTips300_1;
  private variable PlatesInStack4_5;
  private variable Index1;
  private variable dead_volume_2mL_Vial;
  private variable Vol_EtOH80;
  private variable Vol_LIG2;
  private variable TipsPerSample_1000_3;
  private variable ExtraTips300_2;
  private variable Vol_LIG;
  private variable Vol_ATL;
  private variable Vol_ATL2;
  private variable Index2;
  private variable ExtraTips300_3;
  private variable TipsPerSample_1000_4;
  private variable Vol_STL;
  private variable Vol_EtOH80_mL_Tub1;
  private variable ExtraTips300_4;
  private variable TipsPerSample_300_1;
  private variable ExtraTips1000_1;
  private variable TipsPerSample_1000_5;
  private variable Vol_ELB;
  private variable FoundIndex;
  private variable Vol_AmpBeads;
  private variable Vol_AmpBeads_mL;
  private variable Vol_EtOH80_mL_Tub2;
  private variable ExtraTips300_5;
  private variable TipsPerSample_300_2;
  private variable ExtraTips1000_2;
  private variable Vol_EtOH80_mL_Tub3;
  private variable StartingPlatePosition;
  private variable ExtraTips1000_3;
  private variable TipsPerSample_300_3;
  private variable dead_volume_60mL_trough;
  private variable ExtraTips1000_4;
  private variable TipsPerSample_300_4;
  private variable TipsPerSample_1000;
  private variable Index1_loopCounter3;
  private variable ExtraTips1000_5;
  private variable TipsPerSample_300_5;
  private variable Index2_loopCounter3;
  private variable Vol_RPB2;
  private variable SamplesMoreThan48;
  private variable TipsPerSample_50_1;
  private variable Vol_ERP_Pos1;
  private variable Vol_EtOH80_1;
  private variable Vol_PPC2;
  private variable TipsPerSample_50_2;
  private variable ExtraTips1000;
  private variable Vol_EtOH80_2;
  private variable Vol_ERP_Pos2;
  private variable Vol_EtOH80_mL;
  private variable ExtraTips50_1;
  private variable Vol_BBB2;
  private variable TipsPerSample_50_3;
  private variable Vol_RSB1;
  private variable Vol_DilAmpBeads_mL;
  private variable Vol_RSB;
  private variable ExtraTips50_2;
  private variable TipsPerSample_50_4;
  private variable Vol_AmpBeads1;
  private variable Vol_EtOH80_4;
  private variable PlatesInStack1_1;
  private variable Vol_RSB2;
  private variable Text_LoadTris;
  private variable Vol_BBB;
  private variable Vol_PPC;
  private variable ExtraTips50_3;
  private variable Vol_AmpBeads2;
  private variable PlatesInStack1_2;
  private variable TipsPerSample_50_5;
  private variable PlatesInStack2_1;
  private variable loopCounter2;
  private variable PlatesInStack3_1;
  private variable ExtraTips50_4;
  private variable EtOH80_TubsRequired;
  private variable Vol_RSB4;
  private variable Vol_DilAmpBeads1;
  private variable PlatesInStack1_3;
  private variable PlatesInStack2_2;
  private variable loopCounter3;
  private variable RacksOf300s;
  private variable PlatesInStack1_4;
  private variable PlatesInStack4_1;
  private variable PlatesInStack3_2;
  private variable ExtraTips50_5;
  private variable Text_Pos4;
  private variable PlatesInStack2_3;
  private variable RecordsToCheck;
  private variable Vol_AmpBeads4;
  private variable PlatesInStack2_4;
  private variable PlatesInStack4_2;
  private variable PlatesInStack1_5;
  private variable PlatesInStack3_3;
  private variable Text_Pos5;
  private variable PlatesInStack4_3;
  private variable PlatesInStack2_5;
  private variable PlatesInStack3_4;
  private variable arr_Compare[];
  private variable Vol_EPM2;
  private variable Vol_EPM;
  private variable Vol_Tris;
  private variable loopCounter9;
  private variable Text_DAP_Load;
  private variable Text_VialCarrierPrompt;
  MECC::TraceComment(Translate("********** Submethod:  CalculateResources **********"));
  AswStatusDialog::AppendText(Translate("   Calculating resources"));
  if (AnswerStartPoint == 1)
  {
    RunProcess1 = 1;
    if (AnswerStopPoint >= 2)
    {
      RunProcess2 = 1;
    }
    if (AnswerStopPoint >= 3)
    {
      RunProcess3 = 1;
    }
    if (AnswerStopPoint >= 4)
    {
      RunProcess4 = 1;
    }
    if (AnswerStopPoint == 5)
    {
      RunProcess5 = 1;
    }
  }
  if (AnswerStartPoint == 2)
  {
    RunProcess1 = 0;
    RunProcess2 = 1;
    if (AnswerStopPoint >= 3)
    {
      RunProcess3 = 1;
    }
    if (AnswerStopPoint >= 4)
    {
      RunProcess4 = 1;
    }
    if (AnswerStopPoint == 5)
    {
      RunProcess5 = 1;
    }
  }
  if (AnswerStartPoint == 3)
  {
    RunProcess1 = 0;
    RunProcess2 = 0;
    RunProcess3 = 1;
    if (AnswerStopPoint >= 4)
    {
      RunProcess4 = 1;
    }
    if (AnswerStopPoint == 5)
    {
      RunProcess5 = 1;
    }
  }
  if (AnswerStartPoint == 4)
  {
    RunProcess1 = 0;
    RunProcess2 = 0;
    RunProcess3 = 0;
    RunProcess4 = 1;
    if (AnswerStopPoint == 5)
    {
      RunProcess5 = 1;
    }
  }
  if (AnswerStartPoint == 5)
  {
    RunProcess1 = 0;
    RunProcess2 = 0;
    RunProcess3 = 0;
    RunProcess4 = 0;
    RunProcess5 = 1;
  }
  Trace ("Run Process 1?  (1=Yes, 0=No):  ", RunProcess1);
  Trace ("Run Process 2?  (1=Yes, 0=No):  ", RunProcess2);
  Trace ("Run Process 3?  (1=Yes, 0=No):  ", RunProcess3);
  Trace ("Run Process 4?  (1=Yes, 0=No):  ", RunProcess4);
  Trace ("Run Process 5?  (1=Yes, 0=No):  ", RunProcess5);
  if (RunProcess1 == 1)
  {
    PlatesInStack1_1 = 0;
    PlatesInStack2_1 = 3;
    PlatesInStack3_1 = 0;
    PlatesInStack4_1 = 0;
    TipsPerSample_50_1 = 5;
    ExtraTips50_1 = 0;
    TipsPerSample_300_1 = 12;
    ExtraTips300_1 = 0;
    TipsPerSample_1000_1 = 0;
    ExtraTips1000_1 = 32;
  }
  if (RunProcess2 == 1)
  {
    PlatesInStack1_2 = 0;
    PlatesInStack2_2 = 0;
    PlatesInStack3_2 = 1;
    PlatesInStack4_2 = 1;
    if (AnswerAdapterLabware == 1)
    {
      TipsPerSample_50_2 = 11;
    }
    else
    {
      TipsPerSample_50_2 = 12;
    }
    ExtraTips50_2 = 0;
    TipsPerSample_300_2 = 9;
    ExtraTips300_2 = 0;
    TipsPerSample_1000_2 = 0;
    ExtraTips1000_2 = 32;
  }
  if (RunProcess3 == 1)
  {
    PlatesInStack1_3 = 0;
    PlatesInStack2_3 = 0;
    PlatesInStack3_3 = 0;
    PlatesInStack4_3 = 0;
    TipsPerSample_50_3 = 2;
    ExtraTips50_3 = 0;
    TipsPerSample_300_3 = 0;
    ExtraTips300_3 = 0;
    TipsPerSample_1000_3 = 0;
    ExtraTips1000_3 = 0;
  }
  if (RunProcess4 == 1)
  {
    PlatesInStack1_4 = 0;
    PlatesInStack2_4 = 0;
    PlatesInStack3_4 = 1;
    PlatesInStack4_4 = 1;
    TipsPerSample_50_4 = 4;
    ExtraTips50_4 = 0;
    TipsPerSample_300_4 = 4;
    ExtraTips300_4 = 0;
    TipsPerSample_1000_4 = 0;
    ExtraTips1000_4 = 16;
  }
  if (RunProcess5 == 1)
  {
    PlatesInStack1_5 = 0;
    PlatesInStack2_5 = 0;
    PlatesInStack3_5 = 1;
    if (AnswerPooling == 1)
    {
      PlatesInStack4_5 = 1;
      TipsPerSample_50_5 = 2;
    }
    else
    {
      PlatesInStack4_5 = 0;
      TipsPerSample_50_5 = 1;
    }
    ExtraTips50_5 = 0;
    TipsPerSample_300_5 = 2;
    ExtraTips300_5 = 0;
    TipsPerSample_1000_5 = 0;
    ExtraTips1000_5 = 0;
  }
  PlatesInStack1 = PlatesInStack1_1 + PlatesInStack1_2 + PlatesInStack1_3 + PlatesInStack1_4 + PlatesInStack1_5;
  PlatesInStack2 = PlatesInStack2_1 + PlatesInStack2_2 + PlatesInStack2_3 + PlatesInStack2_4 + PlatesInStack2_5;
  PlatesInStack3 = PlatesInStack3_1 + PlatesInStack3_2 + PlatesInStack3_3 + PlatesInStack3_4 + PlatesInStack3_5;
  PlatesInStack4 = PlatesInStack4_1 + PlatesInStack4_2 + PlatesInStack4_3 + PlatesInStack4_4 + PlatesInStack4_5;
  Trace ("Number of plates in Stack 1 required:  ", PlatesInStack1);
  Trace ("Number of plates in Stack 2 required:  ", PlatesInStack2);
  Trace ("Number of plates in Stack 3 required:  ", PlatesInStack3);
  Trace ("Number of plates in Stack 4 required:  ", PlatesInStack4);
  TipsPerSample_50 = TipsPerSample_50_1 + TipsPerSample_50_2 + TipsPerSample_50_3 + TipsPerSample_50_4 + TipsPerSample_50_5;
  TipsPerSample_300 = TipsPerSample_300_1 + TipsPerSample_300_2 + TipsPerSample_300_3 + TipsPerSample_300_4 + TipsPerSample_300_5;
  TipsPerSample_1000 = TipsPerSample_1000_1 + TipsPerSample_1000_2 + TipsPerSample_1000_3 + TipsPerSample_1000_4 + TipsPerSample_1000_5 ;
  ExtraTips50 = ExtraTips50_1 + ExtraTips50_2 +  ExtraTips50_3 + ExtraTips50_4 + ExtraTips50_5;
  ExtraTips300 = ExtraTips300_1 + ExtraTips300_2 +  ExtraTips300_3 + ExtraTips300_4 + ExtraTips300_5;
  ExtraTips1000 = ExtraTips1000_1 + ExtraTips1000_2 + ExtraTips1000_3 + ExtraTips1000_4 + ExtraTips1000_5;
  Number50Tips = NumberOfSamples * TipsPerSample_50;
  Number50Tips = Number50Tips + ExtraTips50;
  Number300Tips = NumberOfSamples * TipsPerSample_300;
  Number300Tips = Number300Tips + ExtraTips300;
  Number1000Tips = NumberOfSamples * TipsPerSample_1000;
  Number1000Tips = Number1000Tips + ExtraTips1000;
  if (NumberOfSamples > 48)
  {
    if (AnswerStartPoint < 5)
    {
      Number1000Tips = Number1000Tips + 1;
    }
  }
  Trace ("Number of 50ul tips required:  ", Number50Tips);
  Trace ("Number of 300ul tips required:  ", Number300Tips);
  Trace ("Number of 1000ul tips required:  ", Number1000Tips);
  RacksOf50s = Number50Tips / (96 * 1.0);
  RacksOf50s = MthRound(RacksOf50s, 1);
  RacksOf300s = Number300Tips / (96 * 1.0);
  RacksOf300s = MthRound(RacksOf300s, 1);
  if (PlatesInStack2 < 3)
  {
    StartingPlatePosition = 4 - PlatesInStack2;
    ML_STAR.Stack2.SetCurrentPosition(StartingPlatePosition);
  }
  if (PlatesInStack3 < 3)
  {
    StartingPlatePosition = 4 - PlatesInStack3;
    ML_STAR.Stack3.SetCurrentPosition(StartingPlatePosition);
  }
  if (PlatesInStack4 < 3)
  {
    StartingPlatePosition = 4 - PlatesInStack4;
    ML_STAR.Stack4.SetCurrentPosition(StartingPlatePosition);
  }
  if (RunProcess2 == 1)
  {
    if (AnswerAdapterLabware == 1)
    {
      Text_DAP_Load = Translate("DAP Plate");
      Text_VialCarrierPrompt = Translate("DAP is being used for adapters--this carrier is not required.");
    }
    else
    {
      Text_DAP_Load = Translate("Empty");
      Text_VialCarrierPrompt = Translate("Place the numbered indexes in the corresponding positions in the vial carrier.");
    }
  }
  else
  {
    Text_DAP_Load = Translate("Empty");
    Text_VialCarrierPrompt = Translate("Process 2 is not being run--this carrier is not required.");
  }
  if (AnswerStartPoint == 1)
  {
    Text_Pos4 = Translate("Empty");
    Text_Pos5 = Translate("CSP Plate--Place your plate with DNA samples here.");
  }
  if (AnswerStartPoint == 2)
  {
    Text_Pos4 = Translate("Empty");
    Text_Pos5 = Translate("ALP Plate--Place your plate with DNA samples here.");
  }
  if (AnswerStartPoint == 3)
  {
    Text_Pos4 = Translate("PCR Plate--Place your plate with DNA samples here.");
    Text_Pos5 = Translate("Empty");
  }
  if (AnswerStartPoint == 4)
  {
    Text_Pos4 = Translate("PCR Plate--Place your plate with DNA samples here.");
    Text_Pos5 = Translate("Empty");
  }
  if (AnswerStartPoint == 5)
  {
    Text_Pos4 = Translate("TSP1 Plate--Place your plate with DNA samples here.");
    Text_Pos5 = Translate("Empty");
  }
  if (RunProcess5 == 1)
  {
    if (AnswerStartPoint == 4)
    {
      Text_LoadTris = Volume_TrisBuffer + 3;
    }
    else
    {
      Text_LoadTris = Translate("Full");
    }
  }
  else
  {
    Text_LoadTris = Translate("0");
  }
  if (AnswerStartPoint == 1)
  {
    if (NumberOfSamples <= 48)
    {
      VialCarBCsToCheck_Rgts_Lg = Translate("1,");
    }
    else
    {
      VialCarBCsToCheck_Rgts_Lg = Translate("1,2,");
    }
    if (RunProcess2 == 1)
    {
      if (NumberOfSamples <= 48)
      {
        VialCarBCsToCheck_Rgts = "" + "15,19,21,";
      }
      else
      {
        VialCarBCsToCheck_Rgts = "" + "15,16,19,20,21,22,";
      }
    }
    if (RunProcess3 == 1)
    {
      if (NumberOfSamples <= 48)
      {
        VialCarBCsToCheck_Rgts = VialCarBCsToCheck_Rgts + "23,25,";
      }
      else
      {
        VialCarBCsToCheck_Rgts = VialCarBCsToCheck_Rgts + "23,24,25,26,";
      }
    }
    if (RunProcess2 == 1)
    {
      if (AnswerAdapterLabware == 1)
      {
        PlateCarBCsToCheck_PCR = Translate("TIP1,TIP2,3_PCR96,5_MIDI");
      }
      else
      {
        PlateCarBCsToCheck_PCR = Translate("TIP1,TIP2,5_MIDI");
      }
    }
    else
    {
      PlateCarBCsToCheck_PCR = Translate("TIP1,TIP2,5_MIDI");
    }
  }
  if (AnswerStartPoint == 2)
  {
    if (NumberOfSamples <= 48)
    {
      VialCarBCsToCheck_Rgts = "" + "15,19,21,";
    }
    else
    {
      VialCarBCsToCheck_Rgts = "" + "15,16,19,20,21,22,";
    }
    if (RunProcess3 == 1)
    {
      if (NumberOfSamples <= 48)
      {
        VialCarBCsToCheck_Rgts = VialCarBCsToCheck_Rgts + "23,25,";
      }
      else
      {
        VialCarBCsToCheck_Rgts = VialCarBCsToCheck_Rgts + "23,24,25,26,";
      }
    }
    if (AnswerAdapterLabware == 1)
    {
      PlateCarBCsToCheck_PCR = Translate("TIP1,TIP2,3_PCR96,5_MIDI");
    }
    else
    {
      PlateCarBCsToCheck_PCR = Translate("TIP1,TIP2,5_MIDI");
    }
  }
  if (AnswerStartPoint == 3)
  {
    PlateCarBCsToCheck_PCR = Translate("TIP1,TIP2,4_PCR96");
    if (NumberOfSamples <= 48)
    {
      VialCarBCsToCheck_Rgts = "" + "23,25";
    }
    else
    {
      VialCarBCsToCheck_Rgts = "" + "23,24,25,26";
    }
  }
  if (AnswerStartPoint == 4)
  {
    PlateCarBCsToCheck_PCR = Translate("TIP1,TIP2,4_PCR96");
  }
  if (AnswerStartPoint == 5)
  {
    PlateCarBCsToCheck_PCR = Translate("TIP1,TIP2,4_PCR96");
  }
  AdapterBCsToRead = Translate("");
  if (RunProcess2 == 1)
  {
    if (AnswerAdapterLabware == 2)
    {
      MECC::TraceComment(Translate("****** Determine which adapter barcodes to look for during loading ....."));
      arr_Compare.SetSize(0);
      {
        for(loopCounter2 = 0; loopCounter2 < NumberOfSamples;)
        {
          loopCounter2 = loopCounter2 + 1;
          Index1=array_Index1Positions.GetAt(loopCounter2-1);
          FoundIndex = 0;
          RecordsToCheck=arr_Compare.GetSize();
          {
            for(loopCounter3 = 0; loopCounter3 < RecordsToCheck;)
            {
              loopCounter3 = loopCounter3 + 1;
              Index1_loopCounter3=arr_Compare.GetAt(loopCounter3-1);
              if (Index1 == Index1_loopCounter3)
              {
                FoundIndex = 1;
                break;
              }
            }
          }
          if (FoundIndex == 0)
          {
            AdapterBCsToRead = AdapterBCsToRead + Index1;
            AdapterBCsToRead = AdapterBCsToRead + Translate(",");
            arr_Compare.AddAsLast(Index1);
          }
        }
      }
      if (NumberOfIndexes == 2)
      {
        {
          for(loopCounter9 = 0; loopCounter9 < NumberOfSamples;)
          {
            loopCounter9 = loopCounter9 + 1;
            Index2=array_Index2Positions.GetAt(loopCounter2-1);
            FoundIndex = 0;
            RecordsToCheck=arr_Compare.GetSize();
            {
              for(loopCounter3 = 0; loopCounter3 < RecordsToCheck;)
              {
                loopCounter3 = loopCounter3 + 1;
                Index2_loopCounter3=arr_Compare.GetAt(loopCounter3-1);
                if (Index2 == Index2_loopCounter3)
                {
                  FoundIndex = 1;
                  break;
                }
              }
            }
            if (FoundIndex == 0)
            {
              AdapterBCsToRead = AdapterBCsToRead + Index2;
              AdapterBCsToRead = AdapterBCsToRead + Translate(",");
              arr_Compare.AddAsLast(Index2);
            }
          }
        }
      }
      Trace (AdapterBCsToRead);
    }
  }
  SamplesMoreThan48 = NumberOfSamples - 48;
  TrackingEthanolVolume_80 = 0;
  if (RunProcess1 == 1)
  {
    if (NumberOfSamples <= 48)
    {
      if (NumberOfSamples == 48)
      {
        Vol_ERP_Pos1 = Translate("Full");
      }
      else
      {
        Vol_ERP_Pos1 = NumberOfSamples * 40;
        Vol_ERP_Pos1 = Vol_ERP_Pos1 + 190;
      }
      Vol_ERP_Pos2 = 0;
    }
    else
    {
      Vol_ERP_Pos1 = Translate("Full");
      if (NumberOfSamples == 96)
      {
        Vol_ERP_Pos2 = Translate("Full");
      }
      else
      {
        Vol_ERP_Pos2 = NumberOfSamples * 40;
        Vol_ERP_Pos2 = Vol_ERP_Pos2 + 190;
      }
    }
    Vol_AmpBeads1 = NumberOfSamples * 110;
    Vol_DilAmpBeads1 = NumberOfSamples * 160;
    Vol_EtOH80_1 = NumberOfSamples * 800;
    Vol_RSB1 = NumberOfSamples * 82.5;
  }
  if (RunProcess2 == 1)
  {
    if (NumberOfSamples <= 48)
    {
      if (NumberOfSamples == 48)
      {
        Vol_ATL = Translate("Full");
        Vol_LIG = Translate("Full");
        Vol_STL = Translate("Full");
      }
      else
      {
        Vol_ATL = NumberOfSamples * 12.8;
        Vol_ATL = Vol_ATL + 55;
        Vol_LIG = NumberOfSamples * 3.1;
        Vol_LIG = Vol_LIG + 45;
        Vol_STL = NumberOfSamples * 5.2;
        Vol_STL = Vol_STL + 20;
      }
      Vol_ATL2 = 0;
      Vol_LIG2 = 0;
      Vol_STL2 = 0;
    }
    else
    {
      Vol_ATL = Translate("Full");
      Vol_LIG = Translate("Full");
      Vol_STL = Translate("Full");
      if (NumberOfSamples == 96)
      {
        Vol_ATL2 = Translate("Full");
        Vol_LIG2 = Translate("Full");
        Vol_STL2 = Translate("Full");
      }
      else
      {
        Vol_ATL2 = SamplesMoreThan48 * 12.8;
        Vol_ATL2 = Vol_ATL2 + 55;
        Vol_LIG2 = SamplesMoreThan48 * 3.1;
        Vol_LIG2 = Vol_LIG2 + 45;
        Vol_STL2 = SamplesMoreThan48 * 5.2;
        Vol_STL2 = Vol_STL2 + 20;
      }
    }
    Vol_AmpBeads2 = NumberOfSamples * 92.5;
    Vol_EtOH80_2 = NumberOfSamples * 800;
    Vol_RSB2 = NumberOfSamples * 82.5;
  }
  if (RunProcess3 == 1)
  {
    if (NumberOfSamples <= 48)
    {
      if (NumberOfSamples == 48)
      {
        Vol_PPC = Translate("Full");
        Vol_EPM = Translate("Full");
      }
      else
      {
        Vol_PPC = NumberOfSamples * 5.2;
        Vol_PPC = Vol_PPC + 50;
        Vol_EPM = NumberOfSamples * 26.1;
        Vol_EPM = Vol_EPM + 45;
      }
      Vol_PPC2 = 0;
      Vol_EPM2 = 0;
    }
    else
    {
      Vol_PPC = Translate("Full");
      Vol_EPM = Translate("Full");
      if (NumberOfSamples == 96)
      {
        Vol_PPC2 = Translate("Full");
        Vol_EPM2 = Translate("Full");
      }
      else
      {
        Vol_PPC2 = SamplesMoreThan48 * 5.2;
        Vol_PPC2 = Vol_PPC2 + 50;
        Vol_EPM2 = SamplesMoreThan48 * 26.1;
        Vol_EPM2 = Vol_EPM2 + 45;
      }
    }
  }
  if (RunProcess4 == 1)
  {
    Vol_AmpBeads4 = NumberOfSamples * 50;
    Vol_EtOH80_4 = NumberOfSamples * 400;
    Vol_RSB4 = NumberOfSamples * 32.5;
  }
  if (RunProcess5 == 1)
  {
    Vol_Tris = Translate("Full");
  }
  if (AnswerStartPoint != 5)
  {
    dead_volume_60mL_trough = 5000;
    dead_volume_2mL_Vial = 45;
    Vol_AmpBeads = Vol_AmpBeads1 + Vol_AmpBeads2;
    Vol_AmpBeads = Vol_AmpBeads + Vol_AmpBeads4;
    Vol_AmpBeads = Vol_AmpBeads + dead_volume_60mL_trough;
    if (Vol_AmpBeads > 0)
    {
      Vol_AmpBeads_mL = Vol_AmpBeads / (1000 * 1.0);
      Vol_AmpBeads_mL = MthCeiling(Vol_AmpBeads_mL);
    }
    if (RunProcess1 == 1)
    {
      Vol_DilAmpBeads1 = Vol_DilAmpBeads1 + 1000;
      Vol_DilAmpBeads_mL = Vol_DilAmpBeads1 / (1000 * 1.0);
      Vol_DilAmpBeads_mL = MthCeiling(Vol_DilAmpBeads_mL);
    }
    Vol_EtOH80 = Vol_EtOH80_1 + Vol_EtOH80_2;
    Vol_EtOH80 = Vol_EtOH80 + Vol_EtOH80_4;
    Vol_EtOH80 = Vol_EtOH80 + dead_volume_60mL_trough;
    if (Vol_EtOH80 > 0)
    {
      Vol_EtOH80_mL = Vol_EtOH80 / 1000;
      Trace ("Volume (mL) 80% Ethanol required:  ", Vol_EtOH80_mL);
    }
    if (Vol_EtOH80_mL <= 60)
    {
      MECC::TraceComment(Translate("***** Only need 1 tub of 80% ethanol"));
      EtOH80_TubsRequired = 1;
      Vol_EtOH80_mL_Tub1 = Vol_EtOH80_mL;
    }
    else
    {
      if (Vol_EtOH80_mL > 120)
      {
        MECC::TraceComment(Translate("***** Need 3 tubs of 80% ethanol"));
        EtOH80_TubsRequired = 3;
        Vol_EtOH80_mL_Tub1 = 60;
        Vol_EtOH80_mL_Tub2 = 60;
        Vol_EtOH80_mL_Tub3 = Vol_EtOH80_mL - 120;
        Vol_EtOH80_mL_Tub3 = Vol_EtOH80_mL_Tub3 + 1;
      }
      else
      {
        MECC::TraceComment(Translate("***** Need 2 tubs of 80% ethanol"));
        EtOH80_TubsRequired = 2;
        Vol_EtOH80_mL_Tub1 = 60;
        Vol_EtOH80_mL_Tub2 = Vol_EtOH80_mL - 60;
        Vol_EtOH80_mL_Tub2 = Vol_EtOH80_mL_Tub2 + 1;
      }
    }
    if (Vol_EtOH80_mL_Tub3 > 65)
    {
      Vol_EtOH80_mL_Tub3 = 65;
    }
    Trace ("80% ethanol in tub 1:  ", Vol_EtOH80_mL_Tub1);
    Trace ("80% ethanol in tub 2:  ", Vol_EtOH80_mL_Tub2);
    Trace ("80% ethanol in tub 3:  ", Vol_EtOH80_mL_Tub3);
    Vol_RSB = 0;
    Vol_RSB = Vol_RSB1 + Vol_RSB2 + Vol_RSB4;
    if (Vol_RSB > 0)
    {
      Vol_RSB = Vol_RSB + dead_volume_60mL_trough;
      Vol_RSB_mL = Vol_RSB / 1000;
      Vol_RSB_mL = MthCeiling(Vol_RSB_mL);
    }
  }
  AswStatusDialog::AppendText(Translate("   Please load the carriers"));
  customDialog_37.InitCustomDialog("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");
  customDialog_37.SetCustomDialogProperty( "textBlock5.Text", PlatesInStack1 );
  customDialog_37.SetCustomDialogProperty( "textBlock6.Text", PlatesInStack2 );
  customDialog_37.SetCustomDialogProperty( "textBlock7.Text", PlatesInStack3 );
  customDialog_37.SetCustomDialogProperty( "textBlock8.Text", PlatesInStack4 );
  customDialog_37.SetCustomDialogProperty( "textBlock12.Text", Number50Tips );
  customDialog_37.SetCustomDialogProperty( "textBlock13.Text", RacksOf50s );
  customDialog_37.SetCustomDialogProperty( "textBlock16.Text", Number300Tips );
  customDialog_37.SetCustomDialogProperty( "textBlock17.Text", RacksOf300s );
  customDialog_37.SetCustomDialogProperty( "textBlock32.Text", Vol_RSB_mL );
  customDialog_37.SetCustomDialogProperty( "textBlock33.Text", Vol_EtOH80_mL_Tub1 );
  customDialog_37.SetCustomDialogProperty( "textBlock34.Text", Vol_EtOH80_mL_Tub2 );
  customDialog_37.SetCustomDialogProperty( "textBlock35.Text", Vol_EtOH80_mL_Tub3 );
  customDialog_37.SetCustomDialogProperty( "textBlock36.Text", Vol_AmpBeads_mL );
  customDialog_37.SetCustomDialogProperty( "textBlock42.Text", Vol_RPB2 );
  customDialog_37.SetCustomDialogProperty( "textBlock43.Text", Vol_ELB );
  customDialog_37.SetCustomDialogProperty( "textBlock44.Text", Vol_ELB2 );
  customDialog_37.SetCustomDialogProperty( "textBlock45.Text", Text_VialCarrierPrompt );
  customDialog_37.SetCustomDialogProperty( "textBlock48.Text", Number1000Tips );
  customDialog_37.SetCustomDialogProperty( "textBlock52.Text", Text_DAP_Load );
  customDialog_37.SetCustomDialogProperty( "textBlock53.Text", Text_Pos4 );
  customDialog_37.SetCustomDialogProperty( "textBlock54.Text", Text_Pos5 );
  customDialog_37.SetCustomDialogProperty( "textBlock87.Text", Vol_ATL );
  customDialog_37.SetCustomDialogProperty( "textBlock88.Text", Vol_ATL2 );
  customDialog_37.SetCustomDialogProperty( "textBlock91.Text", Vol_LIG );
  customDialog_37.SetCustomDialogProperty( "textBlock92.Text", Vol_LIG2 );
  customDialog_37.SetCustomDialogProperty( "textBlock93.Text", Vol_STL );
  customDialog_37.SetCustomDialogProperty( "textBlock94.Text", Vol_STL2 );
  customDialog_37.SetCustomDialogProperty( "textBlock95.Text", Vol_PPC );
  customDialog_37.SetCustomDialogProperty( "textBlock96.Text", Vol_PPC2 );
  customDialog_37.SetCustomDialogProperty( "textBlock97.Text", Vol_EPM );
  customDialog_37.SetCustomDialogProperty( "textBlock98.Text", Vol_EPM2 );
  customDialog_37.SetCustomDialogProperty( "textBlock109.Text", NumberOfSamples );
  customDialog_37.SetCustomDialogProperty( "textBlock99.Text", Vol_BBB );
  customDialog_37.SetCustomDialogProperty( "textBlock100.Text", Vol_BBB2 );
  customDialog_37.SetCustomDialogProperty( "textBlock107.Text", Vol_ERP_Pos1 );
  customDialog_37.SetCustomDialogProperty( "textBlock111.Text", Vol_DilAmpBeads_mL );
  customDialog_37.SetCustomDialogProperty( "textBlock41.Text", Vol_ERP_Pos2 );
  customDialog_37.SetCustomDialogProperty( "textBlock23.Text", Vol_Tris );
  customDialog_37.ShowCustomDialog();
  ButtonClick_Reagents = customDialog_37.GetCustomDialogProperty( "ReturnValue" );
  MECC::TraceComment(Translate("********** Submethod Complete:  CalculateResources **********"));
}

function Check_TipQty( sequence & seq_TipsToCheck, variable var_TipsRequired, variable var_TipType ) void {
  private dialog customDialog_38;
  private variable Tips_FirstPosition;
  private variable Tips_LastPosition;
  private variable TipsAvailable;
  MECC::TraceComment(Translate("*******************************************************\n********** Submethod:  Check_TipQty **********"));
  TRUSEQNANO_PREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
  Tips_FirstPosition = seq_TipsToCheck.GetCurrentPosition();
  Tips_LastPosition = seq_TipsToCheck.GetCount();
  TipsAvailable = Tips_LastPosition - Tips_FirstPosition;
  TipsAvailable = TipsAvailable + 1;
  if (StartingTipPosition_1000_Override == 1)
  {
    if (var_TipType == 1000)
    {
      TipsAvailable = 0;
    }
  }
  if (StartingTipPosition_300_Override == 1)
  {
    if (var_TipType == 300)
    {
      TipsAvailable = 0;
    }
  }
  if (StartingTipPosition_50_Override == 1)
  {
    if (var_TipType == 50)
    {
      TipsAvailable = 0;
    }
  }
  if (Tips_FirstPosition <= 0)
  {
    TipsAvailable = 0;
  }
  Trace ("Tips available:  ", TipsAvailable);
  Trace ("Tips required:  ", var_TipsRequired);
  if (var_TipsRequired > TipsAvailable)
  {
    PTL::ResetUnloadingStateAndSequences();
    PTL::SetUnloadingState("UserResponseTime", 0);
    PTL::SetUnloadingState("ErrorHandling", 3);
    PTL::SetUnloadingSize(1);
    PTL::SetUnloadingSequence(0, seq_TipsToCheck, hslFalse, "");
    if( 0 == PTL::Unload(ML_STAR) )
    {
          PTL::RaiseRuntimeError(-1540095744, PTL::IDS::smartStepUnload, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    PTL::GetUnloadingSequence(0, seq_TipsToCheck);
    customDialog_38.InitCustomDialog("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");
    customDialog_38.SetCustomDialogProperty( "tipType.Text", var_TipType );
    customDialog_38.SetCustomDialogProperty( "textBlock4.Text", var_TipsRequired );
    customDialog_38.ShowCustomDialog();
    if (var_TipType == 50)
    {
      TRUSEQNANO_PREP::TipCounterRead(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, var_TipsRequired, 0, 0);
      MECC::TraceComment(Translate("***** Load 50ul Tip Carrier *****"));
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      StartingTipPosition_50_Override = 0;
    }
    if (var_TipType == 300)
    {
      TRUSEQNANO_PREP::TipCounterRead(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0, var_TipsRequired, 0);
      MECC::TraceComment(Translate("***** Load 300ul Tip Carrier *****"));
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      StartingTipPosition_300_Override = 0;
    }
    if (var_TipType == 1000)
    {
      MECC::TraceComment(Translate("***** Load 1ml Tip Carrier *****"));
      TRUSEQNANO_PREP::TipCounterRead(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0, 0, var_TipsRequired);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      StartingTipPosition_1000_Override = 0;
    }
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    if (SendEmail == 1)
    {
      onerror goto errLabel_39 ;
      err.Clear();
      Util::SendEMail(UserEmailAddress, Translate("Please load more tips"), Translate(""));
      errLabel_39 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        Trace ("Email is not setup correctly!");
      }   /* end if from skip handler if no error */
    }
  }
  {
    Trace (var_TipType, "uL Tips Available = ", TipsAvailable);
    Trace (var_TipType, "uL Tips Needed = ", var_TipsRequired);
  }
  if (TipsAvailable == var_TipsRequired)
  {
    if (var_TipType == 1000)
    {
      StartingTipPosition_1000_Override = 1;
    }
    if (var_TipType == 300)
    {
      StartingTipPosition_300_Override = 1;
    }
    if (var_TipType == 50)
    {
      StartingTipPosition_50_Override = 1;
    }
  }
  MECC::TraceComment(Translate("********** Submethod Complete:  Check_TipQty **********\n******************************************************************"));
}

private function Version(  ) void {
  MECC::TraceComment(Translate("******************************************************************************************************************************************************************************\n******************************************************************************************************************************************************************************\n\nVersion 1.5.4_updated20150623 (Jon Engebretsen)\n\n1. Updated layout to TruSeq Nano DNA v1.5_updated20150622.lay, corrected all positions for demo STAR deck & fixed 300uL tip barcode mask)\n2. Changed transport mode to 1 (iSWAP)\n3. Updated main prompt for default/generic email address\n4. Included Status Dialog updates for each sub-step in a given process (Austin Koontz)\n5. Fixed Ampure mL reagent calculation: adds dead volume, displays correctly into the calculate reagents screen--fixed for process 4\n6. Process_4, changed cleanup step (line 2102) to set movePlatetoShaker parameter from 1 to 0, in order to prevent redundant iSWAP motion. \n\n\n******************************************************************************************************************************************************************************\n******************************************************************************************************************************************************************************"));
  MECC::TraceComment(Translate("******************************************************************************************************************************************************************************\n******************************************************************************************************************************************************************************\n\nVersion 1.5.7, by Austin Koontz\n\n1. Updated layout to TruSeq Nano DNA v1.5_updated20150622.lay, corrected all positions for demo STAR deck & fixed 300uL tip barcode mask)\n2. Changed transport mode to 1 (iSWAP)\n3. Updated main prompt for default/generic email address\n4. Included Status Dialog updates for each sub-step in a given process, including the CleanUp submethod (Austin Koontz)\n5. Fixed Ampure mL reagent calculation: adds dead volume, displays correctly into the calculate reagents screen--fixed for process 4\n6. Added prompt and ASW Dialog Update in main Method warning of final carrier unloading (Austin Koontz)\n6. Process_4, changed cleanup step (line 2102) to set movePlatetoShaker parameter from 1 to 0, in order to prevent redundant iSWAP motion. \n7. Added a dialog before the unloading step in Process 3 to warn user  of the presentation of the HSP plate (Austin Koontz)\n8. Associated method with deck layout file TruSeq Nano DNA v1.5_updated20150723.lay, in order to accord with deck positions present on Tim's STAR used for access. Several position changes (see STAR B118 deck layout coordinates 20150721.txt file) (Austin Koontz)\n9. Changed Line #650 in CalculateResources submethod from \"Index1\" to \"Index2\"  (typo) (Austin Koontz)\n10. Altered the \"Plate-Tip Carrier\" loading instructions of \"Prepare the Required Resources below\" dialog in the CalculateResources submethod to signify to user that the loaded plate (i.e. CSP, PCR, etc.) contains DNA samples (Austin Koontz)\n11. Included a Load LIG step within the Process2_Adenylate_Ligate_Cleanup submethod in order to allow a within method loading of the Ligation Mix (Austin Koontz)\n12. Altered Z-position of DAP/RAP plate (from 211mm to 210mm) (Austin Koontz)\n13. Altered Z-position of SMP_CAR_VIALS1 (from 156mm to 138mm) (Austin Koontz)\n14. Added loading step for CAR_RGT_VIALS_LARGE if Process1 is starting step (Austin Koontz)\n15. Changed \"PMM\" to EPM\" (Austin Koontz)\n\n******************************************************************************************************************************************************************************\n******************************************************************************************************************************************************************************"));
  MECC::TraceComment(Translate("******************************************************************************************************************************************************************************\n******************************************************************************************************************************************************************************\n\nVersion 1.5.8_updated20150731 (Austin Koontz)\n\n1. Deleted CalculateResources_backup and Check_TipQty_backup submethods\n2. \"SkipAllTimers\" and \"UserEmailAddress\" traced out along with other answer from \"Run Settings\" dialog\n3. Hid \"Skip  first cleanup\" option in \"Run Settings\" dialog\n4. Included \"If\" statements for e-mail address--no e-mail is sent if user runs with default \"customer@company.com\", no errors reported in trace file\n5. Re-enabled \"VOLUME CHECK\" grouping within Add_Ethanol submethod\n6. Altered Z-position of SMP_CAR_VIALS1 (from 156mm to 138mm) (Austin Koontz)\n\n******************************************************************************************************************************************************************************\n******************************************************************************************************************************************************************************"));
  MECC::TraceComment(Translate("******************************************************************************************************************************************************************************\n******************************************************************************************************************************************************************************\n\nVersion 1.5.9_updated20150922 (Austin Koontz)\n\n1. Corrected incorrect calculations of EPM.\n2. Changed \"RAP\" to \"DAP\" in \"Required Resources\" custom dialog, as well as other locations in method (i.e. trace steps, status dialog commands, etc.).\n3. Moved warning to unseal DAP plate from Ligation step in Process 2 to the beginning of the method, after \"Run Settings\" dialog.\n4. Altered Z-position of HSP_Pipette from 211.0 mm to 211.5 mm (in response to clot error being reported during PCR_Cleanup, Process 4).\n\n******************************************************************************************************************************************************************************\n******************************************************************************************************************************************************************************"));
  MECC::TraceComment(Translate("******************************************************************************************************************************************************************************\n******************************************************************************************************************************************************************************\n\nVersion 1.6.0_updated20151002 (Austin Koontz)\n\n1. Changed unused reagent positions in \"Required Resources\" custom dialog to being listed as \"Empty\" rather than \"0 uL\".\n\n******************************************************************************************************************************************************************************\n******************************************************************************************************************************************************************************"));
  MECC::TraceComment(Translate("******************************************************************************************************************************************************************************\n******************************************************************************************************************************************************************************\n\nVersion 1.6.1_updated20151007 (Austin Koontz)\n\n1. Altered \"ReadSamplePlateFile\" submethod such that \"FileDelete\" commands used to delete \"TempSamplePlateFile\" are nested within if/else coding in case files aren't present within Illumina/Files directory.\n\n******************************************************************************************************************************************************************************\n******************************************************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  TruSeq Nano DNA Sample Preparation\nBy:          Susan Lee, Hamilton Company, Reno, NV\nDate:     February 18, 2016\nVersion:  1.7.1  (By Austin Koontz)\n\nBased upon TruSeq Nano DNA Library Prep Reference Guide, Illumina PN 15041110 Rev. D\n\nVersion Notes:\n1. Decreased volume of ethanol supernnatant transferred during Transfer_PlatetoWaste step within \"CleanUp\" submethod from 225 uL to 200 uL (original volume).\n2. Updated EtOH CleanUp liquid class.\n3. Updated library references to direct custom submethod libraries to Hamilton Illumina directory.  \n4. Updated trace output of \"Run Settings\" dialog to properly designate multiple \"Not applicable\" values.\n5. Removed \"Example Pooling\" file from method dependencies (redundant with \"Example NormAndPooling for Enrichment\" file). \n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  TruSeq Nano DNA Sample Preparation\nBy:          Susan Lee, Hamilton Company, Reno, NV\nDate:     February 26, 2016\nVersion:  1.7.2  (By Austin Koontz)\n\nBased upon TruSeq Nano DNA Library Prep Reference Guide, Illumina PN 15041110 Rev. D\n\nVersion Notes:\n1. Updated method and layout file location to Illumina directory. \n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  TruSeq Nano DNA Sample Preparation\nBy:          Susan Lee, Hamilton Company, Reno, NV\nDate:     August 18, 2016\nVersion:  1.7.3  (By Austin Koontz)\n\nBased upon TruSeq Nano DNA Library Prep Reference Guide, Illumina PN 15041110 Rev. D\n\nVersion Notes:\n1. Updated Process2_Adenylate_Ligate_Cleanup to lower the temperature of HHS5 from 37 to 30 degress Celsius (rather than leaving HHS5 at 37 and lowering HHS2 to 30).  \n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  TruSeq Nano DNA Sample Preparation\nBy:          Austin Koontz, Hamilton Company, Reno, NV\nDate:     December 8, 2016\nVersion:  1.7.4  (By Austin Koontz)\n\nBased upon TruSeq Nano DNA Library Prep Reference Guide, Illumina PN 15041110 Rev. D\n\nVersion Notes:\n1. Updated TruSeqNano_Prep submethod library to utilize latest version of HSLInhecoTEC library (v2.1.0). \n2. Updated deck layout to version v1.8 to remove CO-RE 96-head slide waste. \n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  TruSeq Nano DNA Sample Preparation\nBy:          Austin Koontz, Hamilton Company, Reno, NV\nDate:     January 30, 2017\nVersion:  1.7.5  (By Austin Koontz)\n\nBased upon TruSeq Nano DNA Library Prep Reference Guide, Illumina PN 15041110 Rev. D\n\nVersion Notes:\n1. Updated deck layout to TruSeq Nano DNA v1.9.lay.\n   A. Changed barcode mask for plate-tip carrier to \"APE*****\" from \"PR******\". \n   B. Updated 32-position reagent vial carrier to refer to carrier definition from Illumina directory. \n2. Updated TruSeqPCRFree_Prep.smt to v1.0.4.\n   A. Updated \"InitHHSs\" to allow users to attempt initialization multiple times. \n3. Updated TruSeqPCRFree_Processes.smt to v1.0.4.\n   A. Updated \"Add_AdaptersViaVials\" to utilize an adapter volume of 2.5 uL, rather than 2 uL. \n   B. Updated \"Transfer_PlateToPlate\" to automatically utilize \"Bottom\" recovery option in case of \"Insufficient Liquid Error\". \n   C. Updated \"MoveHSP\" and \"MoveMIDI\" by deleting unused \"g_ReadBarcodeInformation\" if/else statement, and to automatically \"Continue\" in case of \"Barcode Error\" on barcode read step.  \n4. Updated Run Settings dialog to include note on e-mail in System Configuration Editor, and deleted unused \"EmailNotify\" variable. \n5. Included command at the beginning of Process 2 to set HHS5 temperature to 37C in case of method starting from Process 1 (temperature change not coded for in prior version). \n6. Updated GetTemperature function prior to 30C incubation in Process 2 to properly pull from HHS5 rather than HHS2. \n7. Added GetTemperature functions prior to all movement steps prior to incubation steps in Process 2. \n8. Changed value of SetTempHHS2 variable declared after HHS initialization from 30 (Process 1) and 37 (Process 2) to 0 for both, as HHS2 is not used in either process.\n9. Changed adapter carrier loading (for adapters in vials) to load if RunProcess2 = 1, rather than if AnswerStartPoint = 2. \n10. Updated loading of carriers to allow for \"Continue\" as a recovery option in case of a \"Barcode Error\" and \"No Carrier Barcode Error\". \n11. Deleted unused \"TrackToScanBarcode\" variable (declared at the beginning of the method). \n12. Referenced \"TrackToParkAL\" variable for Autoload park commands.\n13. Included an Autoload park command after STAR initialization.\n14. Included trace command for barcodes on large volume reagent carrier, and moved tracing of small volume reagent carrier within if statement for loading that carrier.\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  TruSeq Nano DNA Sample Preparation\nBy:          Austin Koontz, Hamilton Company, Reno, NV\nDate:     January 30, 2017\nVersion:  1.7.6  (By Austin Koontz)\n\nBased upon TruSeq Nano DNA Library Prep Reference Guide, Illumina PN 15041110 Rev. D\n\nVersion Notes:\n1. Removed TruSeqPCRFree_Prep library from included libraries. \n2. Updated CalculateResources to include calculation of ExtraTips_50 variable during tip total calculations.\n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  TruSeq Nano DNA Sample Preparation\nBy:          Austin Koontz, Hamilton Company, Reno, NV\nDate:     March 10, 2017\nVersion:  1.7.7  (By Austin Koontz)\n\nBased upon TruSeq Nano DNA Library Prep Reference Guide, Illumina PN 15041110 Rev. D\n\nVersion Notes:\n1. Updated deck layout to v2.0.\n  A. Deleted unused sequences.\n2. Updated TruSeqNano_Prep.smt to version 1.6.5.\n   A. Changed trace in SetCPACTemperature to no longer mention tenths of degrees, and to no longer multiply set temperature by 10. \n   B. Deleted disabled steps in \"CheckCPACTemperature\", and deleted ret_ActualTemp_float variable.\n   C. Deleted unused \"ReadSampleSheet\" submethod. \n3. Updated TruSeqNano_Processes.smt to version 1.0.8.\n  A. Updated submerge height value on aspirate step of Add_AmpureSingle from 0 mm to 1 mm. \n  B. Updated \"Normalize\" and \"Read_NormFile\" with comment explaining Assignment with Calculation step calculating buffer volume variable. \n  C. Updated \"Add_AdaptersViaRAP\" to \"Add_AdaptersViaDAP\" and replaced RAP references with DAP references.\n4. Updated CalculateResources submethod. \n  A. ERP volume calculation to properly utilize a value of 40 uL per sample in case of less than 48 samples being run.\n  B. Updated calculation of RSB volume. \n  C. Deleted Skip1stCleanup variable.\n  D. Updated calculation of tip calculation values, including variable calculation of extra 1000 uL tips.\n  E. Updated Required Resources dialog to include volume unit for ERP and Tris. \n  F. Updated position 4 of plate-tip carrier loading prompt to read TSP1 instead of PCR. \n5. Included check to compare user input of adapter labware to sample plate file read in, to ensure there is a correspondence between the two (before addition of adapters in Process 2). \n6. Updated plate transfer at the end of Process 2 (from CAP to HSP), to utilize 0.5 mm fixed height rather than cLLD.\n7. Deleted CO-RE tool eject step following plate movement at the end of Process 4. \n8. Moved status window and trace file update for pooling within if/else statement for pooling variable. \n9. Updated tip counting at the beginning of each local submethod process. \n10. Updated plate check to allow user to retry checking plate stacks in case of error.\n11. Removed unused Trace library from main method.\n12. Deleted .wav file dependency and SoundFile variable.\n13. Updated Process 4 HSP name from PCR to TSP1. \n14. Added code to Process 5 to allow SkipTimers variable to bypass shake step following normalization. \n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  TruSeq Nano DNA Sample Preparation\nBy:          Austin Koontz, Hamilton Company, Reno, NV\nDate:     March 24, 2017\nVersion:  1.7.8  (By Austin Koontz)\n\nBased upon TruSeq Nano DNA Library Prep Reference Guide, Illumina PN 15041110 Rev. D\n\nVersion Notes:\n1. Updated TruSeqNano.lay.\n  A. Deleted unused sequences (_Oil, Vial_ELB, Vial_SMM).\n  B. Updated names for MIDI HHS sequences (changed from MIDI_HHS4 and MIDI_HHS5 to MIDI_HHS1 and MIDI_HHS2, respectively). \n  C. Changed name of adapter vial carrier from CAR_RNA_Adapter_Tubes to CAR_DNA_Adapter_Tubes.\n2. Updated TruSeqNano_Processes.smt to version 1.0.9.\n  A. Updated \"Add_Ethanol\" to properly use timer handle on timer step, in order to skip timers if in Development Mode. \n3. Updated AswStatusDialog library to use new icon.\n4. Added trace output indicating simulation if simulated mode on.\n5. Updated some comments within main method. \n*************************************************************************************************************************************"));
  MECC::TraceComment(Translate("*************************************************************************************************************************************\nMethod:  TruSeq Nano DNA Sample Preparation\nBy:          Austin Koontz, Hamilton Company, Reno, NV\nDate:     August 10, 2017\nVersion:  1.7.9  (By Austin Koontz)\n\nBased upon TruSeq Nano DNA Library Prep Reference Guide, Illumina PN 15041110 Rev. D\n\nVersion Notes:\n1. Updated TruSeqNano_Prep.smt to version 1.6.6.\n  A. Added \"GenerateTipCarrierBarcodes\" submethod.\n  B. Updated \"ReadSamplePlateFile\" to utilize user error-handling for FilDeleteFile commands (rather than searching for the file path).\n  C. Updated \"TipCounterRead\" submethod to display prompts if number of required tips exceeds maximum tip capacity.\n  D. Removed unused libraries.\n2. Updated TruSeqNano_Processes.smt to version 1.1.0.\n  A. Added \"ErrorHandling_TipPickup\", \"Move_HSP_wCOREgrippers\", and \"Move_MIDI_wCOREgrippers\" submethods.\n  B. Deleted unused \"Check_MagPosition\" , \"Check_RgtVolumes\", and \"Check_ForExcludedChannels\" submethods.\n  C. Set \"Adjust_Sequence\" visibility to \"Not exported\".\n  D. Updated automatic error-handling for every tip pickup step, and encased every step within user error-handling to run \"ErrorHandling_TipPickup\" submethod in case of no pickup (after three attempts for \"Next\"). \n  E. Updated \"Add_RSB\" to be able to utilize either 50 or 300 uL tips, and to variabilize fixed height versus touch off on dispense step. \n  F. Updated automatic error-handling on aspirate command of \"Pool\" step to attempt \"Bottom\" recovery once in case of Insufficient Liquid or Liquid Level Error before displaying recovery dialog.\n  G. Removed unused libraries.\n3. Updated \"CalculateResources\" submethod. \n  A. Deleted group \"Not currently used - user selectable plate positions for samples\". \n4. Included \"TrackToScanBarcode\" variable, and updated all MoveMIDI and MoveHSP steps to utilize variable for barcode scanning track.\n5. Updated comments and status dialog updates in Process 5. \n6. Replaced pipetting steps within CleanUp submethod with relevant submethods from TruSeqNano_Processes library.\n7. Included a \"TipCounterWrite\" after every pipetting step. \n8. Updated \"Method Complete\" status dialog update at the end of the method.\n9. Updated dialog windows within Process 4. \n*************************************************************************************************************************************"));
}

private function Abstract(  ) void {
  MECC::TraceComment(Translate("==================================================================================================================================\n\nMethod:  TruSeq Nano DNA Sample Preparation\nBy:          Austin Koontz, Hamilton Company, Reno, NV\nDate:     October 24, 2017\nVersion:  2.0  (By Austin Koontz)\n\nBased upon TruSeq Nano DNA Library Prep Reference Guide, Illumina PN 15041110 Rev. D\n\nVersion Notes:\n1.   Updated TruSeqNano_Prep.smt to version 1.6.7.\n          A. Updated \"GetHHSTemperature\" to wait until specified temperature is reached prior to plate movement. \n          B. Updated user prompts within \"TipCounterRead\" submethod. \n2.   Updated TruSeqNano_Processes.smt to version 1.1.1.\n          A. Updated \"Add_AdaptersViaVials\" to reference \"Nano\" rather than \"TruSeq\" liquid class for adapters for both aspirate commands. \n          B. Updated \"Add_AdaptersViaVials\" to properly aspirate and dispense 2.5 uL volume (rather than previous 2 uL) for both steps.\n          C. Deleted unused \"Transfer_VialToPlate\" submethod. \n3.   Updated \"CalculateResources\" submethod.\n          A. Updated tip estimates for entire process.\n          B. Updated prompt for adapter vial carrier depending on which process and which adapter labware is being utilized. \n4.   Updated \"CleanUp\" submethod.\n          A. Removed reference of \"storage\" for sample plate moved to waste.\n5.   Updated method version to v2.0. \n6.   Updated ALP A-Tailing incubation steps in the beginning of Process 2 to utilize updated heating profile for 70C incubation step (80C for 3 minutes, then ramp\n          down to 70C for remaining 4 minutes). \n7.   Updated tip estimates at beginning of Processes 1 and 2. \n8.   Removed unused VolumeAmpureBeadsForCleanupPCR variable called in main method depending on AnswerAdapterLabware variable. \n9.   Updated ASW status dialog prompts. \n10. Updated liquid classes to use \"Nano\" rather than \"TruSeq\" prefix. \n11. Updated if/else architecture surrounding display of prompt requesting specification of AnswerAdapterLabware variable, in order to capture which adapter labware\n          was used in Processes beyond 2 (to determine correct bead volume for Process 4). \n\n=================================================================================================================================="));
}
