 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\Illumina\\Library\\Illumina TruSeq Nano DNA\\SMTs\\Tip Present Check_5ml_1ml.hs_" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLUtilLib2.hsl" }
 namespace _Method { #include "HSLUtilLib.hsl" }
 namespace _Method { #include "TrackLightHelper.hs_" }
 namespace _Method { #include "ASWStandardDialogs\\AswStatusDialog.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_Device_Controllers.hs_" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _process1 { #include "HSLMthLib.hsl" }
 namespace _process1 { #include "C:\\Program Files (x86)\\HAMILTON\\Illumina\\Library\\Illumina TruSeq Nano DNA\\SMTs\\Tip Present Check_5ml_1ml.hs_" }
 namespace _process1 { #include "HSLML_STARLib.hsl" }
 namespace _process1 { #include "HSLSeqLib.hsl" }
 namespace _process1 { #include "HSLUtilLib2.hsl" }
 namespace _process1 { #include "HSLUtilLib.hsl" }
 namespace _process1 { #include "TrackLightHelper.hs_" }
 namespace _process1 { #include "ASWStandardDialogs\\AswStatusDialog.hsl" }
 namespace _process1 { #include "NIST\\Libraries\\NIST_Device_Controllers.hs_" }
 namespace _process1 { #include "HslHamHeaterShakerLib.hsl" }
#include "NIST\\NIST TruSeq Nano DNA NGS v1.3.res"
 namespace _Method { #include "NIST\\Libraries\\NIST_TruSeqNano_Prep.hs_" }
 namespace _process1 { #include "NIST\\Libraries\\NIST_TruSeqNano_Prep.hs_" }
 namespace _Method { #include "NIST\\Libraries\\NIST_TruSeqNano_Processes.hs_" }
 namespace _process1 { #include "NIST\\Libraries\\NIST_TruSeqNano_Processes.hs_" }
variable File_Normalization;
variable RunProcess4;
variable RunProcess1;
variable RunProcess2;
variable RunProcess3;
variable NumberOfSamples;
variable HHS3;
variable TimerWasStopped;
variable SetTempCPAC;
variable SetTempHHS3;
variable PlatesInStack1;
variable PlatesInStack2;
variable PlatesInStack3;
variable PlatesInStack4;
variable ResultOfPlateCheck_msg;
variable ResultOfPlateCheck_flag;
variable ExtraTips300;
variable TipsPerSample_50;
variable TipsPerSample_300;
variable Number1000Tips;
variable Number50Tips;
variable Number300Tips;
variable NumberOfIndexes;
variable array_ALPPositions[];
variable array_Index1Positions[];
variable array_Index2Positions[];
file file1;
variable PlateCarBCsToCheck_PCR;
variable StartingTipPosition_1000;
variable StartingTipPosition_300;
variable StartingTipPosition_50;
variable HHS4;
variable HHS5;
variable VialCarBCsToCheck_Rgts;
variable AdapterBCsToRead;
sequence DummyStackSeq;
variable TrackingEthanolVolume_80;
variable ButtonClick_Reagents;
variable Volume_TrisBuffer;
variable RunProcess5;
variable var_disable_HHS5;
variable EmailTo;
variable StartingTipPosition_50_Override;
variable StartingTipPosition_1000_Override;
variable StartingTipPosition_300_Override;
variable VialCarBCsToCheck_Rgts_Lg;
variable TrackToParkAL;
variable loopCounter1;
variable bln_Global_SimulatorMode;
variable int_Global_AutoloadPark;
variable bln_Global_SkipAllTimers;
variable int_Global_GripperDevice;
variable int_Global_ReturnDialog;
variable int_Global_TrackToScanBarcode;
variable bln_Global_SendEmail;
variable str_Global_SampleSheet;
variable int_Global_PoolingSelection;
variable int_Global_AdapterSelection;
variable str_Global_MethodName;
variable int_Global_MethodStopPoint;
variable int_Global_MethodStartPoint;
variable str_Global_UserEmailAddress;
variable str_Global_NormalizationSheet;
variable arr_Global__Index2Positions[];
variable arr_Global_Index1Positions[];
variable arr_Global_ALPPositions[];
variable flt_Global_TrisBufferVolume;
variable int_Global_NumberSamples;
variable int_Global_NumberIndices;
dialog customDialog_1;
dialog customDialog_2;
dialog customDialog_3;
dialog customDialog_4;
dialog customDialog_5;
dialog customDialog_6;
dialog customDialog_7;
dialog customDialog_8;
dialog customDialog_9;
dialog customDialog_10;
dialog customDialog_11;
dialog customDialog_12;
variable SetTempHHS4;
variable SetTempHHS5;
variable var_Global_HHSNode3;
variable var_Global_HHSNode4;
variable var_Global_HHSNode5;
variable str_Global_ODTCIPAddress;
variable ODTC;
variable process1;
variable PCR_Initialization;
variable Script_Time;
global device ML_STAR ("NIST\\NIST TruSeq Nano DNA NGS v1.3.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _process1 { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _process1 { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _process1 { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _process1 { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }
 namespace _process1 {  #include __filename__ ".sub"  }
namespace _process1{ function tfn_process1 () {
    if (bln_Global_SimulatorMode == 0)
    {
      NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 0);
      NIST_DEVICE_CONTROLLERS::StartScriptODTC(ODTC, Translate("C:\\Program Files (x86)\\HAMILTON\\Methods\\NIST\\ODTC Files\\PCR_Initialization.xml"), Script_Time, PCR_Initialization);
      NIST_DEVICE_CONTROLLERS::WaitForScriptODTC(ODTC, Script_Time, PCR_Initialization);
      NIST_DEVICE_CONTROLLERS::DoorControlODTC(ODTC, 1);
    }
  } }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    TIP_PRESENT_CHECK_5ML_1ML::_InitLibrary();
    TRACKLIGHTHELPER::_InitLibrary();
    NIST_DEVICE_CONTROLLERS::_InitLibrary();
    NIST_TRUSEQNANO_PREP::_InitLibrary();
    NIST_TRUSEQNANO_PROCESSES::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    Abstract();
    MECC::TraceComment(Translate("==================================================================================================================================\nGlobal Variables and Arrays\n=================================================================================================================================="));
    bln_Global_SimulatorMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    str_Global_ODTCIPAddress = Translate("192.168.88.253");
    var_Global_HHSNode3 = 3;
    var_Global_HHSNode4 = 4;
    var_Global_HHSNode5 = 5;
    str_Global_MethodName = Translate("NIST Nano DNA NGS Library Prep");
    int_Global_GripperDevice = 1;
    bln_Global_SkipAllTimers = 0;
    int_Global_TrackToScanBarcode = 54;
    int_Global_AutoloadPark = 54;
    AswStatusDialog::Initialize(Translate("NIST TruSeq Nano Process"));
    bln_Global_SendEmail = 0;
    arr_Global_Index1Positions.SetSize(0);
    arr_Global__Index2Positions.SetSize(0);
    arr_Global_ALPPositions.SetSize(0);
    MECC::TraceComment(Translate("==================================================================================================================================\nOperator Selections\n=================================================================================================================================="));
    AswStatusDialog::SetStatusText(Translate("Select Run Settings"));
    MECC::TraceComment(Translate("==================================================================================================================================\nOpening Files of Default Selections\n=================================================================================================================================="));
    file1.SetExtendedProperties( "IMEX=1");
    file1.AddField("Method Start Point", int_Global_MethodStartPoint, hslInteger);
    file1.AddField("Method Stop Point", int_Global_MethodStopPoint, hslInteger);
    file1.AddField("Sample Sheet File", str_Global_SampleSheet, hslString, 255);
    file1.AddField("Adapter Selection", int_Global_AdapterSelection, hslInteger);
    file1.AddField("Pooling Selection", int_Global_PoolingSelection, hslInteger);
    if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\Methods\\NIST\\Method Files\\Custom Dialog Defaults.xls" + " " + "Sheet1$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\Methods\\NIST\\Method Files\\Custom Dialog Defaults.xls", "HxMetEdCompCmd");
    }
    if( 0 == file1.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    customDialog_1.InitCustomDialog("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");
    customDialog_1.SetCustomDialogProperty( "textBlock1.Text", str_Global_MethodName );
    customDialog_1.SetCustomDialogProperty( "comboBox1.SelectedIndex", int_Global_MethodStartPoint );
    customDialog_1.SetCustomDialogProperty( "comboBox2.SelectedIndex", int_Global_MethodStopPoint );
    customDialog_1.SetCustomDialogProperty( "path1.Path", str_Global_SampleSheet );
    customDialog_1.SetCustomDialogProperty( "comboBox3.SelectedIndex", int_Global_AdapterSelection );
    customDialog_1.SetCustomDialogProperty( "comboBox4.SelectedIndex", int_Global_PoolingSelection );
    customDialog_1.ShowCustomDialog();
    int_Global_ReturnDialog = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    int_Global_MethodStartPoint = customDialog_1.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
    int_Global_MethodStopPoint = customDialog_1.GetCustomDialogProperty( "comboBox2.SelectedIndex" );
    str_Global_SampleSheet = customDialog_1.GetCustomDialogProperty( "path1.Path" );
    int_Global_AdapterSelection = customDialog_1.GetCustomDialogProperty( "comboBox3.SelectedIndex" );
    int_Global_PoolingSelection = customDialog_1.GetCustomDialogProperty( "comboBox4.SelectedIndex" );
    bln_Global_SkipAllTimers = customDialog_1.GetCustomDialogProperty( "radioButton1.IsChecked" );
    str_Global_UserEmailAddress = customDialog_1.GetCustomDialogProperty( "textBox1.Text" );
    if (int_Global_ReturnDialog == 2)
    {
      MECC::TraceComment(Translate("==================================================================================================================================\nMethod Aborted\n=================================================================================================================================="));
      abort;
    }
    if (str_Global_UserEmailAddress != "customer@company.com")
    {
      bln_Global_SendEmail = 1;
    }
    Trace ("Send E-mail? (1=yes, 0=no)  ", bln_Global_SendEmail);
    if (int_Global_MethodStopPoint < int_Global_MethodStartPoint)
    {
      customDialog_3.InitCustomDialog("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");
      customDialog_3.SetCustomDialogProperty( "textBlock1.Text", str_Global_MethodName );
      customDialog_3.ShowCustomDialog();
      int_Global_ReturnDialog = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
      abort;
    }
    Trace ("==================================================================================================================================");
    Trace ("Starting Point Index:  ", int_Global_MethodStartPoint);
    Trace ("Stopping Point Index:  ", int_Global_MethodStopPoint);
    Trace ("Sample Plate File:  ", str_Global_SampleSheet);
    Trace ("Adapter Labware (1=DAP, 2=Vials, 0,3=Not Applicable):  ", int_Global_AdapterSelection);
    Trace ("Pooling (1=yes, 2=no, 0,3=Not Applicable):  ", int_Global_PoolingSelection);
    Trace ("Skip Timers? (1=yes, 0=no):  ", bln_Global_SkipAllTimers);
    Trace ("Email Address:  ", str_Global_UserEmailAddress);
    Trace ("==================================================================================================================================");
    MECC::TraceComment(Translate("==================================================================================================================================\nMethod Preparation\n=================================================================================================================================="));
    if (str_Global_SampleSheet == "")
    {
      MECC::TraceComment(Translate("==================================================================================================================================\nSecond Chance for File Selection\n=================================================================================================================================="));
      customDialog_11.InitCustomDialog("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");
      customDialog_11.SetCustomDialogProperty( "textBlock1.Text", str_Global_MethodName );
      customDialog_11.SetCustomDialogProperty( "path1.Path", str_Global_SampleSheet );
      customDialog_11.ShowCustomDialog();
      int_Global_ReturnDialog = customDialog_11.GetCustomDialogProperty( "ReturnValue" );
      str_Global_SampleSheet = customDialog_11.GetCustomDialogProperty( "path1.Path" );
      if (int_Global_ReturnDialog == 2)
      {
        MECC::TraceComment(Translate("==================================================================================================================================\nMethod Aborted\n=================================================================================================================================="));
        abort;
      }
      Trace ("==================================================================================================================================");
      Trace ("Sample Plate File:  ", str_Global_SampleSheet);
      Trace ("==================================================================================================================================");
    }
    if (int_Global_MethodStartPoint < 5)
    {
      MECC::TraceComment(Translate("==================================================================================================================================\nMethod Starts in Sample Prep - Read Sample Plate File\n=================================================================================================================================="));
      NIST_TRUSEQNANO_PREP::ReadSamplePlateFile(str_Global_SampleSheet, int_Global_NumberSamples, int_Global_NumberIndices, arr_Global_Index1Positions, arr_Global__Index2Positions, arr_Global_ALPPositions);
    }
    else
    {
      MECC::TraceComment(Translate("==================================================================================================================================\nMethod Starts with Normalization - Read Normalization File\n=================================================================================================================================="));
      customDialog_2.InitCustomDialog("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");
      customDialog_2.SetCustomDialogProperty( "textBlock1.Text", str_Global_MethodName );
      customDialog_2.SetCustomDialogProperty( "path1.Path", str_Global_SampleSheet );
      customDialog_2.ShowCustomDialog();
      int_Global_ReturnDialog = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
      str_Global_SampleSheet = customDialog_2.GetCustomDialogProperty( "path1.Path" );
      if (int_Global_ReturnDialog == 2)
      {
        MECC::TraceComment(Translate("==================================================================================================================================\nMethod Aborted\n=================================================================================================================================="));
        abort;
      }
      Trace ("==================================================================================================================================");
      Trace ("Normalization File:  ", str_Global_NormalizationSheet);
      Trace ("==================================================================================================================================");
      NIST_TRUSEQNANO_PROCESSES::Read_NormFile(ML_STAR, str_Global_NormalizationSheet, flt_Global_TrisBufferVolume, int_Global_NumberSamples);
    }
    MECC::TraceComment(Translate("==================================================================================================================================\nAdapter Labware Check\n=================================================================================================================================="));
    if (int_Global_MethodStartPoint < 5)
    {
      if (int_Global_AdapterSelection == 2)
      {
        if (int_Global_NumberIndices != 1)
        {
          customDialog_10.InitCustomDialog("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");
          customDialog_10.SetCustomDialogProperty( "textBlock1.Text", str_Global_MethodName );
          customDialog_10.ShowCustomDialog();
          int_Global_ReturnDialog = customDialog_10.GetCustomDialogProperty( "ReturnValue" );
          abort;
        }
      }
      if (int_Global_AdapterSelection == 1)
      {
        if (int_Global_NumberIndices != 2)
        {
          customDialog_9.InitCustomDialog("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");
          customDialog_9.SetCustomDialogProperty( "textBlock1.Text", str_Global_MethodName );
          customDialog_9.ShowCustomDialog();
          int_Global_ReturnDialog = customDialog_9.GetCustomDialogProperty( "ReturnValue" );
          abort;
        }
      }
    }
    Trace ("==================================================================================================================================");
    Trace ("Sample Number:  ", int_Global_NumberSamples);
    Trace ("==================================================================================================================================");
    if (int_Global_MethodStartPoint <= 2)
    {
      if (int_Global_MethodStopPoint >= 2)
      {
        if (int_Global_AdapterSelection == 1)
        {
          onerror goto errLabel_13 ;
          err.Clear();
          customDialog_12.InitCustomDialog("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");
          customDialog_12.SetCustomDialogProperty( "textBlock1.Text", str_Global_MethodName );
          customDialog_12.ShowCustomDialog();
          int_Global_ReturnDialog = customDialog_12.GetCustomDialogProperty( "ReturnValue" );
          errLabel_13 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
          }   /* end if from skip handler if no error */
          if (bln_Global_SendEmail == 1)
          {
            onerror goto errLabel_14 ;
            err.Clear();
            Util::SendEMail(str_Global_UserEmailAddress, Translate("Unseal DAP to continue"), Translate(""));
            errLabel_14 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
            }   /* end if from skip handler if no error */
          }
        }
      }
    }
    MECC::TraceComment(Translate("==================================================================================================================================\nSecond Chance to Pick Adapter Labware\n=================================================================================================================================="));
    if (int_Global_MethodStartPoint <= 2)
    {
      if (int_Global_MethodStopPoint >= 2)
      {
        if (int_Global_AdapterSelection != 1)
        {
          if (int_Global_AdapterSelection != 2)
          {
            customDialog_7.InitCustomDialog("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");
            customDialog_7.SetCustomDialogProperty( "textBlock1.Text", str_Global_MethodName );
            customDialog_7.ShowCustomDialog();
            int_Global_AdapterSelection = customDialog_7.GetCustomDialogProperty( "ReturnValue" );
            if (int_Global_AdapterSelection == 6)
            {
              MECC::TraceComment(Translate("==================================================================================================================================\nDAP Plate Will be Used\n=================================================================================================================================="));
              int_Global_AdapterSelection = 1;
            }
            else
            {
              MECC::TraceComment(Translate("==================================================================================================================================\nVials Will be Used\n=================================================================================================================================="));
              int_Global_AdapterSelection = 2;
            }
            Trace ("Adapters will be in (1=DAP, 2=Vials):  ", int_Global_AdapterSelection);
          }
        }
      }
    }
    else
    {
      MECC::TraceComment(Translate("==================================================================================================================================\nThe Adapter Labware Will Need to be Known for Process 4 as Bead Cleanup Volume is a Dependency\n=================================================================================================================================="));
      if (int_Global_MethodStartPoint < 5)
      {
        if (int_Global_MethodStopPoint >= 3)
        {
          if (int_Global_AdapterSelection != 1)
          {
            if (int_Global_AdapterSelection != 2)
            {
              customDialog_4.InitCustomDialog("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");
              customDialog_4.SetCustomDialogProperty( "textBlock1.Text", str_Global_MethodName );
              customDialog_4.ShowCustomDialog();
              int_Global_AdapterSelection = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
              if (int_Global_AdapterSelection == 6)
              {
                MECC::TraceComment(Translate("==================================================================================================================================\nDAP Plate Was Used\n=================================================================================================================================="));
                int_Global_AdapterSelection = 1;
              }
              else
              {
                MECC::TraceComment(Translate("==================================================================================================================================\nVials Were Used\n=================================================================================================================================="));
                int_Global_AdapterSelection = 2;
              }
              Trace ("Adapters were supplied in (1=DAP, 2=Vials):  ", int_Global_AdapterSelection);
            }
          }
        }
      }
    }
    ML_STAR.HSP_HHS3.SetCount(int_Global_NumberSamples);
    ML_STAR.HSP_Pipette.SetCount(int_Global_NumberSamples);
    ML_STAR.HSP_CPAC.SetCount(int_Global_NumberSamples);
    ML_STAR.MIDI_HHS3.SetCount(int_Global_NumberSamples);
    ML_STAR.MIDI_Pipette.SetCount(int_Global_NumberSamples);
    ML_STAR.MIDI_CPAC.SetCount(int_Global_NumberSamples);
    ML_STAR.MIDI_OnMagnet.SetCount(int_Global_NumberSamples);
    ML_STAR.HSP_OnMagnet.SetCount(int_Global_NumberSamples);
    CalculateResources();
    var_disable_HHS5 = 0;
    AswStatusDialog::AppendText(Translate("   Initializing devices"));
    MECC::TraceComment(Translate("==================================================================================================================================\nInitialize System and Devices\n=================================================================================================================================="));
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    Initialize_HHS(HHS3, var_Global_HHSNode3);
    Initialize_HHS(HHS4, var_Global_HHSNode4);
    Initialize_HHS(HHS5, var_Global_HHSNode5);
    if (int_Global_MethodStartPoint == 1)
    {
      SetTempHHS3 = 0;
      SetTempHHS4 = 80;
      SetTempHHS5 = 30;
      SetTempCPAC = 6;
    }
    if (int_Global_MethodStartPoint == 2)
    {
      SetTempHHS3 = 0;
      SetTempHHS4 = 80;
      SetTempHHS5 = 37;
      SetTempCPAC = 6;
    }
    if (int_Global_MethodStartPoint > 2)
    {
      SetTempHHS3 = 0;
      SetTempHHS4 = 0;
      SetTempHHS5 = 37;
      SetTempCPAC = 20;
    }
    Trace ("Setting Temperatures of Devices:");
    Trace ("HHS3 set temperature:  ", SetTempHHS3);
    Trace ("HHS4 set temperature:  ", SetTempHHS4);
    Trace ("HHS5 set temperature:  ", SetTempHHS5);
    Trace ("CPAC set temperature:  ", SetTempCPAC);
    NIST_TRUSEQNANO_PREP::SetHHSTemperature(HHS3, SetTempHHS3);
    NIST_TRUSEQNANO_PREP::SetHHSTemperature(HHS4, SetTempHHS4);
    NIST_TRUSEQNANO_PREP::SetHHSTemperature(HHS5, SetTempHHS5);
    if (bln_Global_SimulatorMode == 0)
    {
      NIST_TRUSEQNANO_PREP::InitCPAC(bln_Global_SimulatorMode);
      NIST_TRUSEQNANO_PREP::InitLiquidWasteSensor();
      NIST_TRUSEQNANO_PREP::SetCPACTemperature(SetTempCPAC);
    }
    NIST_DEVICE_CONTROLLERS::InitODTC(str_Global_ODTCIPAddress, ODTC);
    AswStatusDialog::AppendText(Translate("   Tip counters"));
    NIST_TRUSEQNANO_PREP::TipCounterRead(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, Number50Tips, Number300Tips, Number1000Tips);
    StartingTipPosition_50 = ML_STAR.MlStar50ulTipWithFilter.GetCurrentPosition();
    StartingTipPosition_300 = ML_STAR.MlStar300ulStandardVolumeTipWithFilter.GetCurrentPosition();
    StartingTipPosition_1000 = ML_STAR.MlStar1000ulHighVolumeTipWithFilter.GetCurrentPosition();
    AswStatusDialog::AppendText(Translate("   Loading carriers"));
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    if (int_Global_MethodStartPoint == 1)
    {
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      Trace ("Barcodes to check on large volume reagent carrier:  ", VialCarBCsToCheck_Rgts_Lg);
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    if (int_Global_MethodStartPoint == 5)
    {
      ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    }
    if (int_Global_MethodStartPoint < 5)
    {
      if (int_Global_MethodStartPoint > 1)
      {
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
      if (int_Global_MethodStartPoint != 4)
      {
        if (int_Global_MethodStopPoint != 1)
        {
          Trace ("Barcodes to check on small volume reagent carrier:  ", VialCarBCsToCheck_Rgts);
          ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
        }
      }
    }
    if (RunProcess2 == 1)
    {
      if (int_Global_AdapterSelection == 2)
      {
        Trace ("Barcodes to check on adapter vial carrier:  ", AdapterBCsToRead);
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      }
    }
    Trace ("Barcodes to check on plate carrier:  ", PlateCarBCsToCheck_PCR);
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    if (bln_Global_SimulatorMode == 0)
    {
      AswStatusDialog::AppendText(Translate("   Checking plate quantities"));
      {
        loopCounter1 = 0;
        while (1 == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          NIST_TRUSEQNANO_PREP::CheckPlatesInStacks(ML_STAR, int_Global_GripperDevice, DummyStackSeq, ML_STAR.Stack2, ML_STAR.Stack3, ML_STAR.Stack4, PlatesInStack1, PlatesInStack2, PlatesInStack3, PlatesInStack4, ResultOfPlateCheck_flag, ResultOfPlateCheck_msg, ML_STAR.COREGripTool);
          if (ResultOfPlateCheck_flag == 1)
          {
            Trace ("***Result of plate stacker check indicates incorrect number of plates");
            Trace ("***User given the chance to retry or abort");
            customDialog_8.InitCustomDialog("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");
            customDialog_8.SetCustomDialogProperty( "textBlock1.Text", str_Global_MethodName );
            customDialog_8.ShowCustomDialog();
            int_Global_ReturnDialog = customDialog_8.GetCustomDialogProperty( "ReturnValue" );
            if (int_Global_ReturnDialog == 2)
            {
              MECC::TraceComment(Translate("==================================================================================================================================\nMethod Aborted\n=================================================================================================================================="));
              abort;
            }
            ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
            customDialog_5.InitCustomDialog("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");
            customDialog_5.SetCustomDialogProperty( "textBlock1.Text", str_Global_MethodName );
            customDialog_5.ShowCustomDialog();
            int_Global_ReturnDialog = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
            if (int_Global_ReturnDialog == 4)
            {
              Trace ("***Retrying plate stacker check");
            }
            else
            {
              Trace ("***User has selected abort");
              ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
              ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
              MECC::TraceComment(Translate("==================================================================================================================================\nMethod Aborted\n=================================================================================================================================="));
              abort;
            }
          }
          else
          {
            Trace ("***Result of plate stacker check indicates correct number of plates");
            break;
          }
        }
      }
    }
    MECC::TraceComment(Translate("==================================================================================================================================\nBegin Method\n=================================================================================================================================="));
    if (RunProcess1 == 1)
    {
      Process1_Clean_ER_SizeSelect();
    }
    if (RunProcess2 == 1)
    {
      Process2_Adenylate_Ligate_Cleanup();
    }
    if (RunProcess3 == 1)
    {
      process1 = Fork("_process1::tfn_process1");
      if( process1 == 0 )
      {
            MECC::RaiseRuntimeErrorEx(-1590820608, MECC::IDS::stepNameThreadBegin, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      Process3_A_PCRPrep();
      if(0 == Join(process1, hslInfinite) )
      {
            MECC::RaiseRuntimeErrorEx(-1574043390, MECC::IDS::stepNameThreadWaitFor, MECC::IDS::errorStepFailedTimeout, "", "HxMetEdCompCmd");
      }
      Process3_B_PCR();
    }
    if (RunProcess4 == 1)
    {
      Process4_PCR_Cleanup();
    }
    if (RunProcess5 == 1)
    {
      Process5_NormalizePool();
    }
    MECC::TraceComment(Translate("==================================================================================================================================\nMethod End - Start Deck Unloading\n=================================================================================================================================="));
    ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    MECC::TraceComment(Translate("==================================================================================================================================\nUnload Carriers\n=================================================================================================================================="));
    AswStatusDialog::AppendText(Translate("Unload Carriers"));
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    if (int_Global_MethodStartPoint <= 2)
    {
      if (int_Global_MethodStopPoint >= 2)
      {
        if (int_Global_AdapterSelection == 2)
        {
          ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        }
      }
    }
    if (int_Global_MethodStartPoint < 4)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      if (int_Global_MethodStartPoint == 1)
      {
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      }
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    if (int_Global_MethodStartPoint == 1)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    if (int_Global_MethodStartPoint >= 4)
    {
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    }
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    MECC::TraceComment(Translate("==================================================================================================================================\nTerminate Connections\n=================================================================================================================================="));
    AswStatusDialog::AppendText(Translate("Method complete"));
    NIST_TRUSEQNANO_PREP::TipCounterWrite(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
    HSLHamHeaterShaker::Terminate();
    NIST_DEVICE_CONTROLLERS::TerminateCPAC();
    customDialog_6.InitCustomDialog("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");
    customDialog_6.SetCustomDialogProperty( "textBlock1.Text", str_Global_MethodName );
    customDialog_6.ShowCustomDialog();
    int_Global_ReturnDialog = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
    AswStatusDialog::Terminate();
    TIP_PRESENT_CHECK_5ML_1ML::_ExitLibrary();
    TRACKLIGHTHELPER::_ExitLibrary();
    NIST_DEVICE_CONTROLLERS::_ExitLibrary();
    NIST_TRUSEQNANO_PREP::_ExitLibrary();
    NIST_TRUSEQNANO_PROCESSES::_ExitLibrary();
  } }
