<?xml version="1.0" encoding="utf-8"?>
<MethodSet>
  <DeleteAllMethods>false</DeleteAllMethods>
  <Method methodName="Device_Test_Incubation" creator="Matthew Smith" dateTime="2019-06-07T12:08:50.8349384-04:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>1</FluidQuantity>
    <PostHeating>false</PostHeating>
    <StartBlockTemperature>25</StartBlockTemperature>
    <StartLidTemperature>75</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>15</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>11.9</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>75</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>1.3</Slope>
      <PlateauTemperature>50</PlateauTemperature>
      <PlateauTime>15</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>75</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>1.3</Slope>
      <PlateauTemperature>40</PlateauTemperature>
      <PlateauTime>15</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>75</LidTemp>
    </Step>
    <Step>
      <Number>4</Number>
      <Slope>0.75</Slope>
      <PlateauTemperature>30</PlateauTemperature>
      <PlateauTime>15</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>75</LidTemp>
    </Step>
    <Step>
      <Number>5</Number>
      <Slope>0.75</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>15</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>75</LidTemp>
    </Step>
    <Step>
      <Number>6</Number>
      <Slope>0.23</Slope>
      <PlateauTemperature>10</PlateauTemperature>
      <PlateauTime>15</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>75</LidTemp>
    </Step>
    <Step>
      <Number>7</Number>
      <Slope>0.23</Slope>
      <PlateauTemperature>6</PlateauTemperature>
      <PlateauTime>0</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>75</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
</MethodSet>