//  ------------------------------------------------------------------------------------
//  Hamilton Company Software Product
//  Copyright (c) 2009 by Hamilton Bonaduz AG.
//  ------------------------------------------------------------------------------------
//
//  Modification History
//  --------------------
//  1.00  2008-02-12/cjoerg    Library created.
//  1.10  2009-11-19/cjoerg    Edited step with SW 4.3. Updated error settings for new/changed errors.
//                             Added new parameters 'touchOff', 'airTransportRetractDist' and 'aspPosAboveTouch'
//                             Incremented step function name counter to _002 because of changed parameters.
//  ------------------------------------------------------------------------------------
#pragma once

#ifndef INCLUDED_FROM_METHOD
	#ifndef HSL_RUNTIME
		device ML_STAR;
	#endif
#endif

#ifdef _DEBUG_STAR_STEPPARAMS
	#ifndef __MlStarStepsUtilLib_hsl__
	#include "MlStarStepsUtilLib.hsl"
	#endif
#endif

function Channel_5ml_Aspirate_002(
	device   ML_STAR,
	sequence& aspirateSequence,
	variable volumeArray[],
	variable channelVariable,
	variable liquidClass,
	variable sequenceCounting,
	variable channelUse,
	variable aspirateMode,
	variable capacitiveLLD,
	variable pressureLLD,
	variable liquidFollowing,
	variable mixCycles,
	variable touchOff,
	variable submergeDepth,
	variable liquidHeight,
	variable maxLLdDifference,
	variable mixPosition,
	variable mixVolume,
	variable airTransportRetractDist,
	variable aspPosAboveTouch) variable[]
{
	variable rc[];

	#ifdef _DEBUG_STAR_STEPPARAMS
	{
		variable stepName;
		stepName = GetFunctionName();
		DEBUG::TraceStepParamDevice(stepName, "device", ML_STAR);
		DEBUG::TraceStepParamSequence(stepName, "aspirateSequence", aspirateSequence);
		DEBUG::TraceStepParamVariableArray(stepName, "aspirateVolumes", volumeArray);
		DEBUG::TraceStepParamVariable(stepName, "channelVariable", channelVariable);
		DEBUG::TraceStepParamVariable(stepName, "liquidClass", liquidClass);
		DEBUG::TraceStepParamVariable(stepName, "sequenceCounting", sequenceCounting);
		DEBUG::TraceStepParamVariable(stepName, "channelUse", channelUse);
		DEBUG::TraceStepParamVariable(stepName, "aspirateMode", aspirateMode);
		DEBUG::TraceStepParamVariable(stepName, "capacitiveLLD", capacitiveLLD);
		DEBUG::TraceStepParamVariable(stepName, "pressureLLD", pressureLLD);
		DEBUG::TraceStepParamVariable(stepName, "liquidFollowing", liquidFollowing);
		DEBUG::TraceStepParamVariable(stepName, "mixCycles", mixCycles);
		DEBUG::TraceStepParamVariable(stepName, "touchOff", touchOff);
		DEBUG::TraceStepParamVariable(stepName, "submergeDepth", submergeDepth);
		DEBUG::TraceStepParamVariable(stepName, "liquidHeight", liquidHeight);
		DEBUG::TraceStepParamVariable(stepName, "maxLLdDifference", maxLLdDifference);
		DEBUG::TraceStepParamVariable(stepName, "mixPosition", mixPosition);
		DEBUG::TraceStepParamVariable(stepName, "mixVolume", mixVolume);
		DEBUG::TraceStepParamVariable(stepName, "airTransportRetractDist", airTransportRetractDist);
		DEBUG::TraceStepParamVariable(stepName, "aspPosAboveTouch", aspPosAboveTouch);
	}
	#endif

	/////////////////////////////////////////////////////////////////////
	//  Important: Before edit the low level step be shure that the
	//             instrument configuration is set to 8 5ml channels!
	/////////////////////////////////////////////////////////////////////
	// Abort must be invisible in the error settings
	rc = ML_STAR._F55EBC5A_143B_42db_9C96_CA7F32116EC3("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"); // XLAspirate
	return( rc );
}
