//  ------------------------------------------------------------------------------------
//  Hamilton Company Software Product
//  Copyright (c) 2009 by Hamilton Bonaduz AG.
//  ------------------------------------------------------------------------------------
//
//  Modification History
//  --------------------
//  1.00  2004-10-18/cjoerg    Library created.
//  1.01  2005-07-28/cjoerg    Added debug traces for step parameters.
//  1.10  2005-07-28/cjoerg    Extended with parameter 'collision control'.
//  1.11  2005-08-09/cjoerg    Completed debug traces for parameter 'sequenceCounting'.
//  1.20  2006-10-23/cjoerg    Extended with parameter 'grip mode'.
//  1.30  2008-02-12/cjoerg    Edited step with SW 4.2. Updated error settings for new/changed errors.
//  1.40  2009-11-19/cjoerg    Edited step with SW 4.3. Updated error settings for new/changed errors.
//  ------------------------------------------------------------------------------------
#pragma once

#ifndef INCLUDED_FROM_METHOD
	#ifndef HSL_RUNTIME
		device ML_STAR;
	#endif
#endif

#ifdef _DEBUG_STAR_STEPPARAMS
	#ifndef __MlStarStepsUtilLib_hsl__
	#include "MlStarStepsUtilLib.hsl"
	#endif
#endif

function iSwap_GetFirstPlatePosition_001(
	device   ML_STAR,
	sequence& searchSequence,
	variable sequenceCounting,
	variable gripForce,
	variable inverseGrip,
	variable collisionControl,
	variable gripMode,
	variable gripWidth,
	variable tolerance,
	variable gripHeight,
	variable widthBefore) variable[]
{
	variable rc[];

	#ifdef _DEBUG_STAR_STEPPARAMS
	{
		variable stepName;
		stepName = GetFunctionName();
		DEBUG::TraceStepParamDevice(stepName, "device", ML_STAR);
		DEBUG::TraceStepParamSequence(stepName, "searchSequence", searchSequence);
		DEBUG::TraceStepParamVariable(stepName, "sequenceCounting", sequenceCounting);
		DEBUG::TraceStepParamVariable(stepName, "gripForce", gripForce);
		DEBUG::TraceStepParamVariable(stepName, "inverseGrip", inverseGrip);
		DEBUG::TraceStepParamVariable(stepName, "collisionControl", collisionControl);
		DEBUG::TraceStepParamVariable(stepName, "gripMode", gripMode);
		DEBUG::TraceStepParamVariable(stepName, "gripWidth", gripWidth);
		DEBUG::TraceStepParamVariable(stepName, "tolerance", tolerance);
		DEBUG::TraceStepParamVariable(stepName, "gripHeight", gripHeight);
		DEBUG::TraceStepParamVariable(stepName, "widthBefore", widthBefore);
	}
	#endif

	// Abort must be invisible in the error settings
	rc = ML_STAR._8E745E0A_158E_425e_BD3E_2F894E354A40("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"); // GetFirstPlatePosition
	return( rc );
}
