 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "STAR Tools\\STAR Tip Tools.hs_" }
 namespace _Method { #include "Common\\iSWAP-PlateAndLidMovement.hs_" }
 namespace _Method { #include "NIST\\Libraries\\NIST_Device_Controllers.hs_" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_TruSeqNano_Prep.hs_" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "Common\\GSF-IMS.shared_submethods.hs_" }
#include "RNA circuit plate growth and cytometry.res"
variable bln_Global_SimulatorMode;
variable source_col;
variable dilution_factor;
variable cell_volume;
global device ML_STAR ("RNA circuit plate growth and cytometry.lay", "ML_STAR", hslTrue);
global device HxFan ("RNA circuit plate growth and cytometry.lay", "HxFan", hslTrue);
sequence cytom_column_arr[];
variable column_num;
variable cytom_labware_id;
variable row_num;
variable well_id;
sequence PBS_source_arr[];
variable pbs_source_num;
sequence pbs_source_seq;
variable cytom_col_number;
variable cytom_volume;
variable pbs_source_for_col_arr[];
variable pbs_volume;
variable num_wells;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    STAR_TIP_TOOLS::_InitLibrary();
    ISWAP_PLATEANDLIDMOVEMENT::_InitLibrary();
    NIST_DEVICE_CONTROLLERS::_InitLibrary();
    NIST_TRUSEQNANO_PREP::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    bln_Global_SimulatorMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    StartUp();
    GetParams();
    cell_volume = cytom_volume / (dilution_factor * 1.0);
    pbs_volume = cytom_volume - cell_volume;
    cytom_column_arr.SetSize(12);
    cytom_labware_id = SeqGetLabwareId(ML_STAR.Cytometry_plate);
    {
      for(column_num = 0; column_num < 12;)
      {
        column_num = column_num + 1;
        if (column_num == 12)
        {
          num_wells = 6;
        }
        else
        {
          num_wells = 8;
        }
        {
          for(row_num = 0; row_num < num_wells;)
          {
            row_num = row_num + 1;
            well_id = SeqGetPositionId(ML_STAR.Cytometry_plate);
            SeqAdd(cytom_column_arr.ElementAt( column_num -1), cytom_labware_id, well_id);
            SeqIncrement(ML_STAR.Cytometry_plate, 1);
          }
        }
      }
    }
    SeqResetSequenceIndexes(cytom_column_arr.ElementAt( column_num -1));
    PBS_source_arr.SetSize(0);
    PBS_source_arr.AddAsLast(ML_STAR.PBS_1);
    PBS_source_arr.AddAsLast(ML_STAR.PBS_2);
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Cytometry_plate_lid, ML_STAR.Cytometry_plate_lid_parking, 0, 1, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_plate_lid, ML_STAR.Media_plate_lid_parking, 1, 0, ML_STAR);
    {
      for(pbs_source_num = 0; pbs_source_num < 2;)
      {
        pbs_source_num = pbs_source_num + 1;
        pbs_source_seq=PBS_source_arr.GetAt(pbs_source_num-1);
        GSF_IMS_SHARED_SUBMETHODS::TipPickupWithErrorHandling(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR);
        {
          for(cytom_col_number = 0; cytom_col_number < 12;)
          {
            cytom_col_number = cytom_col_number + 1;
            source_col=pbs_source_for_col_arr.GetAt(cytom_col_number-1);
            if (pbs_source_num == source_col)
            {
              TrcTrace4(Translate("Pipette from source col "), pbs_source_num, Translate(" to Cytom col "), cytom_col_number);
              GSF_IMS_SHARED_SUBMETHODS::pipette_PBS(pbs_source_seq, cytom_column_arr.ElementAt( cytom_col_number -1), pbs_volume, 2, pbs_source_seq, pbs_source_seq, ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
            }
          }
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Cytometry_plate_lid_parking, ML_STAR.Cytometry_plate_lid, 0, 1, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_plate_lid_parking, ML_STAR.Media_plate_lid, 1, 0, ML_STAR);
    CleanUp();
    STAR_TIP_TOOLS::_ExitLibrary();
    ISWAP_PLATEANDLIDMOVEMENT::_ExitLibrary();
    NIST_DEVICE_CONTROLLERS::_ExitLibrary();
    NIST_TRUSEQNANO_PREP::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_ExitLibrary();
  } }
