 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "STAR Tools\\STAR Tip Tools.hs_" }
 namespace _Method { #include "Common\\iSWAP-PlateAndLidMovement.hs_" }
 namespace _Method { #include "NIST\\Libraries\\NIST_Device_Controllers.hs_" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_TruSeqNano_Prep.hs_" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "Common\\GSF-IMS.shared_submethods.hs_" }
#include "RNA circuit plate growth and cytometry.res"
variable bln_Global_SimulatorMode;
variable media_source_for_col_arr[];
variable source_col;
variable culture_volume;
variable dilution_factor;
variable cell_volume;
variable media_volume;
sequence GP_column_arr[];
sequence Media_source_arr[];
variable GP_col_number;
variable media_source_num;
sequence media_source_seq;
global device ML_STAR ("RNA circuit plate growth and cytometry.lay", "ML_STAR", hslTrue);
global device HxFan ("RNA circuit plate growth and cytometry.lay", "HxFan", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    STAR_TIP_TOOLS::_InitLibrary();
    ISWAP_PLATEANDLIDMOVEMENT::_InitLibrary();
    NIST_DEVICE_CONTROLLERS::_InitLibrary();
    NIST_TRUSEQNANO_PREP::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    bln_Global_SimulatorMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    StartUp();
    GetParams();
    cell_volume = culture_volume / (dilution_factor * 1.0);
    media_volume = culture_volume - cell_volume;
    GP_column_arr.SetSize(0);
    GP_column_arr.AddAsLast(ML_STAR.GP_col_01);
    GP_column_arr.AddAsLast(ML_STAR.GP_col_02);
    GP_column_arr.AddAsLast(ML_STAR.GP_col_03);
    GP_column_arr.AddAsLast(ML_STAR.GP_col_04);
    GP_column_arr.AddAsLast(ML_STAR.GP_col_05);
    GP_column_arr.AddAsLast(ML_STAR.GP_col_06);
    GP_column_arr.AddAsLast(ML_STAR.GP_col_07);
    GP_column_arr.AddAsLast(ML_STAR.GP_col_08);
    GP_column_arr.AddAsLast(ML_STAR.GP_col_09);
    GP_column_arr.AddAsLast(ML_STAR.GP_col_10);
    GP_column_arr.AddAsLast(ML_STAR.GP_col_11);
    GP_column_arr.AddAsLast(ML_STAR.GP_col_12);
    Media_source_arr.SetSize(0);
    Media_source_arr.AddAsLast(ML_STAR.media_1);
    Media_source_arr.AddAsLast(ML_STAR.media_2);
    Media_source_arr.AddAsLast(ML_STAR.media_3);
    Media_source_arr.AddAsLast(ML_STAR.media_4);
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Growth_Plate_Lid_parking, 0, 0, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_plate_lid, ML_STAR.Media_plate_lid_parking, 1, 0, ML_STAR);
    {
      for(media_source_num = 0; media_source_num < 4;)
      {
        media_source_num = media_source_num + 1;
        media_source_seq=Media_source_arr.GetAt(media_source_num-1);
        GSF_IMS_SHARED_SUBMETHODS::TipPickupWithErrorHandling(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, ML_STAR);
        {
          for(GP_col_number = 0; GP_col_number < 12;)
          {
            GP_col_number = GP_col_number + 1;
            source_col=media_source_for_col_arr.GetAt(GP_col_number-1);
            if (media_source_num == source_col)
            {
              TrcTrace4(Translate("Pipette from source col "), media_source_num, Translate(" to GP col "), GP_col_number);
              GSF_IMS_SHARED_SUBMETHODS::pipette_media(media_source_seq, GP_column_arr.ElementAt( GP_col_number -1), media_volume, 2, media_source_seq, media_source_seq, ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter);
            }
          }
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_Lid_parking, ML_STAR.Growth_Plate_lid, 0, 0, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_plate_lid_parking, ML_STAR.Media_plate_lid, 1, 0, ML_STAR);
    CleanUp();
    STAR_TIP_TOOLS::_ExitLibrary();
    ISWAP_PLATEANDLIDMOVEMENT::_ExitLibrary();
    NIST_DEVICE_CONTROLLERS::_ExitLibrary();
    NIST_TRUSEQNANO_PREP::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    GSF_IMS_SHARED_SUBMETHODS::_ExitLibrary();
  } }
