// {{{ 2 "SubmethodForwardDeclaration" ""
private function CalculateOutputs(  ) void ;
private function CleanUp(  ) void ;
private function DebuggingPause(  ) void ;
private function GetParams(  ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;
// }} ""
// {{{ 5 "OnAbort" "Begin"
function OnAbort(  ) void {
// }} ""
// {{ 5 "OnAbort" "InitLocals"
// }} ""
// {{{ 130 1 0 "3274d9bb_d8d9_425b_9b6871c3b10b4f2e" "{7C4EF7A7-39BE-406a-897F-71F3A35B4093}"
CleanUp();
// }} ""
// {{{ 5 "OnAbort" "End"
}
// }} ""
// {{{ 5 "CleanUp" "Begin"
private function CleanUp(  ) void {
// }} ""
// {{ 5 "CleanUp" "InitLocals"
// }} ""
// {{ 38 1 0 "c9bc5896_28bc_499f_8f7758730b2fdd90" "{F07B0071-8EFC-11d4-A3BA-002035848439}"
MECC::TraceComment(Translate("***************************************************************************\nCleanUp() submethod\n***************************************************************************"));
// }} ""
// {{ 39 1 0 "f0d64616_5356_4f53_aa9c0e25816cc76f" "ML_STAR:{2931977C-E32F-4471-8B68-F31ED1A866F5}"
{
	variable arrRetValues[];
	arrRetValues = ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("f0d64616_5356_4f53_aa9c0e25816cc76f"); // LockFrontCover
}
// }} ""
// {{ 40 1 0 "493d3876_d549_423a_aefe06ff17a4e8e3" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{{ 41 1 0 "d8b3be5c_0e79_400e_a699431ad532c301" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
TipCount::Write2(ML_STAR.MlStar50ulTipWithFilter, "tip_counter_50", ML_STAR);
// }} ""
// {{{ 42 1 0 "cc679522_2a00_46af_9ceef26a9174e932" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
TipCount::Write2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, "tip_counter_300", ML_STAR);
// }} ""
// {{{ 43 1 0 "7876ee25_2480_4ce8_8797a0813257a502" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
TipCount::Write2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, "tip_counter_1000", ML_STAR);
// }} ""
// {{ 44 1 0 "493d3876_d549_423a_aefe06ff17a4e8e3" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{{ 5 "CleanUp" "End"
}
// }} ""
// {{{ 5 "StartUp" "Begin"
private function StartUp(  ) void {
// }} ""
// {{ 5 "StartUp" "InitLocals"
// }} ""
// {{ 120 1 0 "0681c32a_edc8_48cd_ad1de1b591afbf3c" "{F07B0071-8EFC-11d4-A3BA-002035848439}"
MECC::TraceComment(Translate("***************************************************************************\nStart StartUp() submethod\n***************************************************************************"));
// }} ""
// {{ 121 1 0 "04707f9e_cd92_45fe_a6e747564418ca9b" "ML_STAR:{1C0C0CB0-7C87-11D3-AD83-0004ACB1DCB2}"
{
	variable arrRetValues[];
	arrRetValues = ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("04707f9e_cd92_45fe_a6e747564418ca9b"); // Initialize
}
// }} ""
// {{ 122 1 0 "cbbc0dcb_5c96_421b_944f9f3c9ae252c2" "ML_STAR:{EA251BFB-66DE-48D1-83E5-6884B4DD8D11}"
{
	variable arrRetValues[];
	arrRetValues = ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("cbbc0dcb_5c96_421b_944f9f3c9ae252c2"); // MoveAutoLoad
}
// }} ""
// {{ 123 1 0 "43a47775_6fad_4bd8_bbdcf15010c9aea1" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{{ 124 1 0 "5ece4d2b_621c_424f_baf3187c79ec446f" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
TipCount::Read2(ML_STAR.MlStar50ulTipWithFilter, Translate("tip_counter_50"), ML_STAR);
// }} ""
// {{{ 125 1 0 "6646dd27_f015_430e_8c52bfce5c82377a" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
TipCount::Read2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("tip_counter_300"), ML_STAR);
// }} ""
// {{{ 126 1 0 "ed7a4866_7fbf_4e2b_9492b07f824056de" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
TipCount::Read2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, Translate("tip_counter_1000"), ML_STAR);
// }} ""
// {{ 127 1 0 "43a47775_6fad_4bd8_bbdcf15010c9aea1" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{ 128 1 0 "ece35f81_2773_4857_8c03ba1a40ceec15" "{F07B0071-8EFC-11d4-A3BA-002035848439}"
MECC::TraceComment(Translate("***************************************************************************\nEnd StartUp() submethod\n***************************************************************************"));
// }} ""
// {{{ 5 "StartUp" "End"
}
// }} ""
// {{{ 5 "DebuggingPause" "Begin"
private function DebuggingPause(  ) void {
// }} ""
private dialog dialogHandleB8864FDEFE234f8b9D770F86CA85902F;
// {{ 5 "DebuggingPause" "InitLocals"
// }} ""
// {{ 46 1 0 "4af2a8fd_9649_4f7a_9048ca4eca95cc31" "{21E07B31-8D2E-11d4-A3B8-002035848439}"
dialogHandleB8864FDEFE234f8b9D770F86CA85902F.SetOutput(Translate("Click 'OK' to continue."));
dialogHandleB8864FDEFE234f8b9D770F86CA85902F.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
// }} ""
// {{{ 5 "DebuggingPause" "End"
}
// }} ""
// {{{ 5 "GetParams" "Begin"
private function GetParams(  ) void {
// }} ""
private variable dilution_factor_str;
private variable loc;
private variable loopCounter2;
private variable read_line;
private file file1;
private variable split_line[];
private variable plasmid_key;
private variable well_id;
private variable has_key;
private variable plasmid_id;
private variable cytom_volume_str;
private variable pbs_type_arr[];
private variable pbs_key;
private variable pbs_type;
private variable loopCounter1;
private dialog dialogHandleA7DAED82D82B4ed0ABD368F316003D68;
private variable pbs_source_col;
private variable pbs_id;
private variable has_pbs_key;
private variable loopCounter3;
// {{ 5 "GetParams" "InitLocals"
// }} ""
// {{ 48 1 0 "80d5c3b6_e7e3_48ef_9c112647ccc2ccaf" "{F07B0071-8EFC-11d4-A3BA-002035848439}"
MECC::TraceComment(Translate("***************************************************************************\nStart GetParams() submethod\n***************************************************************************"));
// }} ""
// {{{ 49 1 0 "1a3db046_be2d_41af_b74b70f94b34c61e" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
HSLExtensions::Dictionary::CreateDictionary(Translate("param_dict"), 2);
// }} ""
// {{ 50 1 0 "fd2975b6_ee73_42ae_b74a49b3e609c661" "{B31F3534-5D80-11d4-A5EB-0050DA737D89}"
file1.AddField(1, read_line, hslString);
file1.SetDelimiter(hslAsciiText);
if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", hslRead) )
{
    MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", "HxMetEdCompCmd");
}
// }} ""
// {{ 51 1 0 "ae5c3c1e_1f2e_4029_bff64d9743c074d0" "{B31F3532-5D80-11d4-A5EB-0050DA737D89}"
{
loopCounter2 = 0;
while (
   (file1.Eof() == 0)
)
{
loopCounter2 = loopCounter2 + 1;
// }} ""
// {{ 52 1 0 "c627cbcf_ad59_4fef_8b137d26183e429d" "{B31F3536-5D80-11d4-A5EB-0050DA737D89}"
if( 0 == file1.ReadRecord() )
{
    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
}
// }} ""
// {{{ 53 1 0 "50a21467_38b1_487f_918fd5ee9bdfe55c" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
loc = StrFind(read_line, ",");
// }} ""
// {{ 54 1 0 "adf5a0ec_6fad_4a7b_9a440e00c72150f2" "{B31F3531-5D80-11d4-A5EB-0050DA737D89}"
if (loc > 0)
{
// }} ""
// {{{ 55 1 0 "ba05763a_90fd_4905_964dff7232fb4fad" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
split_line = HSLExtensions::String::Split(read_line, Translate(","), 1);
// }} ""
// {{{ 56 1 0 "695c4cb5_7a18_4634_bf732c8e58d8fc20" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
HSLExtensions::Dictionary::AddItem(Translate("param_dict"), split_line.ElementAt( 1 -1), split_line.ElementAt( 2 -1));
// }} ""
// {{ 57 1 0 "adf5a0ec_6fad_4a7b_9a440e00c72150f2" "{B31F3531-5D80-11d4-A5EB-0050DA737D89}"
}
// }} ""
// {{ 58 1 0 "ae5c3c1e_1f2e_4029_bff64d9743c074d0" "{B31F3532-5D80-11d4-A5EB-0050DA737D89}"
}
}
// }} ""
// {{ 59 1 0 "54a3aeb8_edb1_47ca_a75a3b46226de584" "{B31F3538-5D80-11d4-A5EB-0050DA737D89}"
if( 0 != file1.Close() )
{
    MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
}
file1.RemoveFields();
// }} ""
// {{{ 60 1 0 "7a1490b2_b529_4dd4_b8ea9adaed71e0fd" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
worklist_file_path = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), Translate("worklistFile"));
// }} ""
// {{ 61 1 0 "547e7680_b7f4_4b44_89b7054738114d58" "{F07B0071-8EFC-11d4-A3BA-002035848439}"

// }} ""
// {{{ 62 1 0 "d7e0357f_156c_4733_999115b99c976dd1" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
strain_1_id = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), Translate("strain1"));
// }} ""
// {{{ 63 1 0 "e6c9a08e_f56b_447a_bd2e6f9b3fa3c00a" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
plasmid_id = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), Translate("plasmid_B1"));
// }} ""
// {{ 64 1 0 "7bc29762_8297_40cc_ac6410aa5b023e83" "{F07B0071-8EFC-11d4-A3BA-002035848439}"

// }} ""
// {{{ 65 1 0 "c3bf33f7_4ee4_4298_a50e5f258199c906" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
HSLExtensions::Dictionary::CreateDictionary(Translate("plasmid_by_well_dict"), 2);
// }} ""
// {{ 66 1 0 "c2f6d38b_da82_4b61_a71ece0a145b4e21" "{B31F3532-5D80-11d4-A5EB-0050DA737D89}"
{
loopCounter2 = 0;
ML_STAR.Growth_Plate.SetCurrentPosition(1);
while (
   (ML_STAR.Growth_Plate.GetCurrentPosition() > 0)
)
{
AlignSequences(hslTrue, ML_STAR.Growth_Plate, 1);
loopCounter2 = loopCounter2 + 1;
// }} ""
// {{{ 67 1 0 "6b9e778c_85b3_4db0_bbf7556e3667b06f" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
well_id = SeqGetPositionId(ML_STAR.Growth_Plate);
// }} ""
// {{{ 68 1 0 "71482ab6_6b29_45b2_b2bb07d14f03e68d" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
plasmid_key = StrConcat2(Translate("plasmid_"), well_id);
// }} ""
// {{{ 69 1 0 "986bc91c_4df9_4bf4_99d2da30bccda466" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
has_key = HSLExtensions::Dictionary::ExistsItem(Translate("param_dict"), plasmid_key);
// }} ""
// {{ 70 1 0 "0f11814a_3b19_420c_9a0f33ac7b63448b" "{B31F3531-5D80-11d4-A5EB-0050DA737D89}"
if (has_key == 1)
{
// }} ""
// {{{ 71 1 0 "eea73c1e_bad1_439e_8582bfb37c3b163f" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
plasmid_id = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), plasmid_key);
// }} ""
// {{ 72 1 0 "ca5bb220_d60a_4a6d_8bb728d7c476a015" "{B31F3531-5D80-11d4-A5EB-0050DA737D89}"
if (plasmid_id != "none")
{
// }} ""
// {{{ 73 1 0 "cff46f4c_eec6_4460_9e9c52ca9e714a2f" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
HSLExtensions::Dictionary::AddItem(Translate("plasmid_by_well_dict"), well_id, plasmid_id);
// }} ""
// {{{ 74 1 0 "506b768f_9d58_493f_bef31bef14754168" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
TrcTrace4(Translate("well_id: "), well_id, Translate(", plasmid_id: "), plasmid_id);
// }} ""
// {{ 75 1 0 "ca5bb220_d60a_4a6d_8bb728d7c476a015" "{B31F3531-5D80-11d4-A5EB-0050DA737D89}"
}
// }} ""
// {{ 76 1 0 "0f11814a_3b19_420c_9a0f33ac7b63448b" "{B31F3531-5D80-11d4-A5EB-0050DA737D89}"
}
// }} ""
// {{{ 77 1 0 "e03323b2_df04_47e4_92ecace6d07c3ac0" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
SeqIncrement(ML_STAR.Growth_Plate, 1);
// }} ""
// {{ 78 1 0 "c2f6d38b_da82_4b61_a71ece0a145b4e21" "{B31F3532-5D80-11d4-A5EB-0050DA737D89}"
if (
   (ML_STAR.Growth_Plate.GetCurrentPosition() > 0 && ML_STAR.Growth_Plate.GetMax() == 0 )
)
{ MECC::EndlessSequenceLoopWarning(GetFileName()); }

}
ML_STAR.Growth_Plate.SetMax(ML_STAR.Growth_Plate.GetTotal());
ML_STAR.Growth_Plate.SetCurrentPosition(1);
}
// }} ""
// {{ 79 1 0 "ece4dbef_3085_4912_8d0b7d856addb1cf" "{F07B0071-8EFC-11d4-A3BA-002035848439}"

// }} ""
// {{{ 80 1 0 "c8e29248_ea21_4716_a0d96bf2ac07c204" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
cytom_volume_str = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), Translate("cytomVolume"));
// }} ""
// {{{ 81 1 0 "9ef71438_7013_4619_964a5b1b6013156f" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
cytom_volume = StrFVal(cytom_volume_str);
// }} ""
// {{ 82 1 0 "5338d16b_6b5c_4276_a5c7cbb6018df3b6" "{F07B0071-8EFC-11d4-A3BA-002035848439}"

// }} ""
// {{{ 83 1 0 "3b2f9d67_1dd8_49f6_8ab268d267c704ee" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
dilution_factor_str = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), Translate("cytomDilutionFactor"));
// }} ""
// {{{ 84 1 0 "33f4a0c9_4e76_48e2_9a8f9661b78139eb" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
dilution_factor = StrFVal(dilution_factor_str);
// }} ""
// {{ 85 1 0 "194fdee6_17a7_4232_9bebecfe7adf7cec" "{F07B0071-8EFC-11d4-A3BA-002035848439}"

// }} ""
// {{ 86 1 0 "b2e834cc_f4d5_45b3_84a25272014c4285" "{4900C1F7-0FB7-4033-8253-760BDB9354DC}"
pbs_type_arr.SetSize(0);
// }} ""
// {{ 87 1 0 "f504fb89_9261_4be1_b63c28b7021bcb5a" "{F07B0071-8EFC-11d4-A3BA-002035848439}"

// }} ""
// {{{ 88 1 0 "32f8383c_a117_48e3_9f792964b52496a2" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
HSLExtensions::Dictionary::CreateDictionary(Translate("pbs_source_dict"), 2);
// }} ""
// {{ 89 1 0 "5d1cb6c7_e6f9_43e9_a298aa50c4cb4518" "{B31F3532-5D80-11d4-A5EB-0050DA737D89}"
{
for(loopCounter1 = 0; loopCounter1 < 2;)
{
loopCounter1 = loopCounter1 + 1;
// }} ""
// {{{ 90 1 0 "022189e9_4019_4200_9f065b15d6ba12be" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
pbs_key = StrConcat2(Translate("pbs_source_"), loopCounter1);
// }} ""
// {{{ 91 1 0 "c5ad9c41_3467_4117_b1453a9fc9425e53" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
pbs_type = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), pbs_key);
// }} ""
// {{ 92 1 0 "5018e4f3_977f_4efb_94cce02892a108ec" "{F17B7626-27CB-47f1-8477-8C4158339A6D}"
pbs_type_arr.AddAsLast(pbs_type);
// }} ""
// {{{ 93 1 0 "80b88586_6951_45bf_968e4f3b3674f85c" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
HSLExtensions::Dictionary::AddItem(Translate("pbs_source_dict"), pbs_type, loopCounter1);
// }} ""
// {{ 94 1 0 "5d1cb6c7_e6f9_43e9_a298aa50c4cb4518" "{B31F3532-5D80-11d4-A5EB-0050DA737D89}"
}
}
// }} ""
// {{ 95 1 0 "796bf8e9_1922_4f92_be96b9a9f10c7aff" "{F07B0071-8EFC-11d4-A3BA-002035848439}"

// }} ""
// {{ 96 1 0 "83dcdcb6_7dea_4a71_ab8a2901835c9bb2" "{F07B0071-8EFC-11d4-A3BA-002035848439}"

// }} ""
// {{ 97 1 0 "eb008801_7d73_4326_b76e3d293b49001b" "{F07B0071-8EFC-11d4-A3BA-002035848439}"

// }} ""
// {{ 98 1 0 "ba511593_bb61_47fe_a0f4309dd3374179" "{4900C1F7-0FB7-4033-8253-760BDB9354DC}"
pbs_source_for_col_arr.SetSize(0);
// }} ""
// {{ 99 1 0 "aee4bbee_e48a_4faa_abdbddb5b42ba7ba" "{B31F3532-5D80-11d4-A5EB-0050DA737D89}"
{
for(loopCounter3 = 0; loopCounter3 < 12;)
{
loopCounter3 = loopCounter3 + 1;
// }} ""
// {{{ 100 1 0 "6ceb2f3b_bc3a_4e28_8f87639db61978ad" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
pbs_key = StrConcat2(Translate("pbs_"), loopCounter3);
// }} ""
// {{{ 101 1 0 "919d61fb_1a4c_4890_8c4489fa267fc380" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
has_key = HSLExtensions::Dictionary::ExistsItem(Translate("param_dict"), pbs_key);
// }} ""
// {{ 102 1 0 "91ca19d9_51d9_459e_a5e419904a28c16f" "{B31F3531-5D80-11d4-A5EB-0050DA737D89}"
if (has_key == 1)
{
// }} ""
// {{{ 103 1 0 "562713c9_006a_44e0_8427957570dfb1c7" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
pbs_id = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), pbs_key);
// }} ""
// {{ 104 1 0 "7dd0b53e_d2a5_42c5_8cdc169b326d3e7e" "{B31F3531-5D80-11d4-A5EB-0050DA737D89}"
if (pbs_id != "none")
{
// }} ""
// {{{ 105 1 0 "48908ef7_c7ba_42eb_ba82c20333446f07" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
has_pbs_key = HSLExtensions::Dictionary::ExistsItem(Translate("pbs_source_dict"), pbs_id);
// }} ""
// {{ 106 1 0 "10abf177_3082_4e0e_aac8c83ff3530017" "{B31F3531-5D80-11d4-A5EB-0050DA737D89}"
if (has_pbs_key == 1)
{
// }} ""
// {{{ 107 1 0 "5ee6f429_6861_47ac_bec4fdef764eea7a" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
pbs_source_col = HSLExtensions::Dictionary::GetItem(Translate("pbs_source_dict"), pbs_id);
// }} ""
// {{ 108 1 0 "d291fb51_7bb6_4926_843963f423d4e46c" "{F17B7626-27CB-47f1-8477-8C4158339A6D}"
pbs_source_for_col_arr.AddAsLast(pbs_source_col);
// }} ""
// {{ 109 1 0 "10abf177_3082_4e0e_aac8c83ff3530017" "{B31F3531-5D80-11d4-A5EB-0050DA737D89}"
}
else
{
// }} ""
// {{ 110 1 0 "6db5a2ba_bfaa_4bcc_9b5060b275cb910c" "{21E07B31-8D2E-11d4-A3B8-002035848439}"
dialogHandleA7DAED82D82B4ed0ABD368F316003D68.SetOutput(Translate("The PBS type for "), pbs_key, Translate(", "), pbs_id, Translate(" was not listed in the input file as a 'pbs_source_n' type."), Translate("So, no PBS will be added to column "), "\n", loopCounter3, Translate(" of the Cytometry Plate."));
dialogHandleA7DAED82D82B4ed0ABD368F316003D68.ShowOutput(Translate("Media ID not found!"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
// }} ""
// {{ 111 1 0 "41e1afd4_5488_4576_8a50158450a1a69f" "{F17B7626-27CB-47f1-8477-8C4158339A6D}"
pbs_source_for_col_arr.AddAsLast(0);
// }} ""
// {{ 112 1 0 "10abf177_3082_4e0e_aac8c83ff3530017" "{B31F3531-5D80-11d4-A5EB-0050DA737D89}"
}
// }} ""
// {{ 113 1 0 "7dd0b53e_d2a5_42c5_8cdc169b326d3e7e" "{B31F3531-5D80-11d4-A5EB-0050DA737D89}"
}
else
{
// }} ""
// {{ 114 1 0 "6cda0f28_32af_4dc0_93780985a252dc8d" "{F17B7626-27CB-47f1-8477-8C4158339A6D}"
pbs_source_for_col_arr.AddAsLast(0);
// }} ""
// {{ 115 1 0 "7dd0b53e_d2a5_42c5_8cdc169b326d3e7e" "{B31F3531-5D80-11d4-A5EB-0050DA737D89}"
}
// }} ""
// {{ 116 1 0 "91ca19d9_51d9_459e_a5e419904a28c16f" "{B31F3531-5D80-11d4-A5EB-0050DA737D89}"
}
// }} ""
// {{ 117 1 0 "aee4bbee_e48a_4faa_abdbddb5b42ba7ba" "{B31F3532-5D80-11d4-A5EB-0050DA737D89}"
}
}
// }} ""
// {{ 118 1 0 "79674314_73c6_4f22_aff8a0af63a7ecac" "{F07B0071-8EFC-11d4-A3BA-002035848439}"
MECC::TraceComment(Translate("***************************************************************************\nEnd GetParams() submethod\n***************************************************************************"));
// }} ""
// {{{ 5 "GetParams" "End"
}
// }} ""
// {{{ 5 "CalculateOutputs" "Begin"
private function CalculateOutputs(  ) void {
// }} ""
// {{ 5 "CalculateOutputs" "InitLocals"
// }} ""
// {{ 36 1 0 "30dfa6ee_cd6c_4be0_87031e4c0ac25ae2" "{F07B0071-8EFC-11d4-A3BA-002035848439}"
MECC::TraceComment(Translate("**** CalculateOutputs sub-method ****"));
// }} ""
// {{{ 5 "CalculateOutputs" "End"
}
// }} ""
/* {{ 2 "SubmethodInsertLine" "" */ // }} ""
// $$author=djross$$valid=0$$time=2024-06-13 15:06$$checksum=92743ab0$$length=085$$