private function CalculateOutputs(  ) void ;
private function CleanUp(  ) void ;
private function DebuggingPause(  ) void ;
private function ErrorHandling_TipPickup( sequence & seq_TipsToUse ) void ;
private function GetParams(  ) void ;
private function Get_Tip_Use_Str( sequence & in_seq ) variable ;
private function SaveWorklistAndMetadata(  ) void ;
private function StartUp(  ) void ;
private function TipPickupWithErrorHandling( sequence & seq_tipsForPickup ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function CleanUp(  ) void {
  MECC::TraceComment(Translate("***************************************************************************\nCleanUp() submethod\n***************************************************************************"));
  if (bln_Global_SimulatorMode == 0)
  {
    {
      	HxFan.SetFanSpeed("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"); // SetFanSpeed
    }
  }
  ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
  TipCount::Write2(ML_STAR.MlStar50ulTipWithFilter, "tip_counter_50", ML_STAR);
  TipCount::Write2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, "tip_counter_300", ML_STAR);
  TipCount::Write2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, "tip_counter_1000", ML_STAR);
}

private function StartUp(  ) void {
  MECC::TraceComment(Translate("***************************************************************************\nStart StartUp() submethod\n***************************************************************************"));
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  TipCount::Read2(ML_STAR.MlStar50ulTipWithFilter, Translate("tip_counter_50"), ML_STAR);
  TipCount::Read2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Translate("tip_counter_300"), ML_STAR);
  TipCount::Read2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, Translate("tip_counter_1000"), ML_STAR);
  if (bln_Global_SimulatorMode == 0)
  {
    {
      	HxFan.SetComPort("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"); // SetComPort
    }
    {
      	HxFan.SetFanSpeed("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"); // SetFanSpeed
    }
    {
      	HxFan.SetContinuousMode("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"); // SetContinuousMode
    }
  }
  MECC::TraceComment(Translate("***************************************************************************\nEnd StartUp() submethod\n***************************************************************************"));
}

private function ErrorHandling_TipPickup( sequence & seq_TipsToUse ) void {
  private variable ret_AbortMethod;
  private variable var_DialogBoxString;
  private variable loopCounter_ChannelsNoTips;
  private variable ret_ReloadTips;
  private variable channelIndex;
  private variable flag_SkipToNextTipRack;
  private variable var_TipSequenceCurrentPosition;
  private variable var_NumberChannelsWithNoTips;
  private variable var_PickupPattern;
  private variable var_NoTipChannelString;
  private variable var_NumberTipsRemaining;
  private variable firmwareReturn;
  private variable var_Channel;
  private variable isTipPresent;
  private variable var_TipPickupPattern;
  private variable ret_RetryNextTipRack;
  private variable var_TipSequenceEndPosition;
  private variable Tip_Counter;
  private variable SimOn;
  private variable firmwareCommand;
  private variable arr_ChannelsNoTip[];
  private dialog customDialog_1;
  private dialog customDialog_2;
  private dialog dialogHandle_3;
  private variable loopCounter8;
  private variable int_tips_picked_up;
  private variable int_tip_type;
  private variable str_tip_type;
  MECC::TraceComment(Translate("START TIP PICKUP ERROR HANDLING"));
  SimOn = HSLML_STAR::IsSimulatorMode(ML_STAR);
  if (SimOn == 0)
  {
    STAR_TIP_TOOLS::GetTipType(ML_STAR, seq_TipsToUse, int_tip_type);
    if (int_tip_type == 23)
    {
      Tip_Counter = "tip_counter_50";
      str_tip_type = "50 uL tips";
    }
    if (int_tip_type == 1)
    {
      Tip_Counter = "tip_counter_300";
      str_tip_type = "300 uL tips";
    }
    if (int_tip_type == 5)
    {
      Tip_Counter = "tip_counter_1000";
      str_tip_type = "1000 uL tips";
    }
    var_PickupPattern = Translate("");
    arr_ChannelsNoTip.SetSize(0);
    {
      for(channelIndex = 0; channelIndex < 8;)
      {
        channelIndex = channelIndex + 1;
        firmwareCommand = StrConcat4(Translate("P"), channelIndex, Translate("RW"), Translate(""));
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
          	firmwareReturn = arrRetValues[3];
        }
        isTipPresent = StrMid(firmwareReturn, 5, 1);
        if (isTipPresent == "1")
        {
          var_TipPickupPattern = Translate("0");
        }
        else
        {
          var_TipPickupPattern = Translate("1");
          arr_ChannelsNoTip.AddAsLast(channelIndex);
        }
        var_PickupPattern = var_PickupPattern + var_TipPickupPattern;
      }
    }
    var_NumberChannelsWithNoTips=arr_ChannelsNoTip.GetSize();
    var_NoTipChannelString = Translate("");
    {
      for(loopCounter_ChannelsNoTips = 0; loopCounter_ChannelsNoTips < var_NumberChannelsWithNoTips;)
      {
        loopCounter_ChannelsNoTips = loopCounter_ChannelsNoTips + 1;
        var_Channel=arr_ChannelsNoTip.GetAt(loopCounter_ChannelsNoTips-1);
        var_Channel = StrIStr(var_Channel);
        if (loopCounter_ChannelsNoTips != 1)
        {
          var_Channel = StrConcat2(Translate(", "), var_Channel);
        }
        var_NoTipChannelString = var_NoTipChannelString + var_Channel;
      }
    }
    var_TipSequenceCurrentPosition = seq_TipsToUse.GetCurrentPosition();
    var_TipSequenceEndPosition = seq_TipsToUse.GetCount();
    var_NumberTipsRemaining = var_TipSequenceEndPosition - var_TipSequenceCurrentPosition;
    var_NumberTipsRemaining = var_NumberTipsRemaining + 1;
    flag_SkipToNextTipRack = 1;
    if (var_NumberTipsRemaining <= 96)
    {
      flag_SkipToNextTipRack = 0;
    }
    var_DialogBoxString = StrConcat4(Translate("Channel(s) "), var_NoTipChannelString, Translate(" were not able to pick up the requested "), str_tip_type);
    customDialog_2.InitCustomDialog("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");
    customDialog_2.SetCustomDialogProperty( "radioButton2.IsEnabled", flag_SkipToNextTipRack );
    customDialog_2.SetCustomDialogProperty( "textBlock1.Text", var_DialogBoxString );
    customDialog_2.ShowCustomDialog();
    ret_AbortMethod = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
    ret_ReloadTips = customDialog_2.GetCustomDialogProperty( "radioButton1.IsChecked" );
    ret_RetryNextTipRack = customDialog_2.GetCustomDialogProperty( "radioButton2.IsChecked" );
    if (ret_AbortMethod == 2)
    {
      abort;
    }
    if (ret_ReloadTips == 1)
    {
      int_tips_picked_up = 0;
      {
        loopCounter8 = 0;
        while (int_tips_picked_up == 0)
        {
          loopCounter8 = loopCounter8 + 1;
          PTL::ResetUnloadingStateAndSequences();
          PTL::SetUnloadingState("UserResponseTime", 0);
          PTL::SetUnloadingState("ErrorHandling", 3);
          PTL::SetUnloadingSize(1);
          PTL::SetUnloadingSequence(0, seq_TipsToUse, hslFalse, "");
          if( 0 == PTL::Unload(ML_STAR) )
          {
                PTL::RaiseRuntimeError(-1540095744, PTL::IDS::smartStepUnload, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
          PTL::GetUnloadingSequence(0, seq_TipsToUse);
          customDialog_1.InitCustomDialog("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");
          customDialog_1.ShowCustomDialog();
          PTL::ResetLoadingStateAndSequences();
          PTL::SetLoadingState("UserResponseTime", hslInfinite);
          PTL::SetLoadingState("ErrorHandling", 5);
          PTL::SetLoadingState("InitializeCustomStepID", 0);
          PTL::SetLoadingState("LoadCarrierCustomStepID", 12);
          PTL::SetLoadingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetLoadingState("CalibrateCarrierChannel", -1);
          PTL::SetLoadingSize(1);
          PTL::SetLoadingSequence(0, seq_TipsToUse, 1, -10, hslTrue, hslTrue, Tip_Counter);
          if( 0 == PTL::Load(ML_STAR, hslTrue) )
          {
                PTL::RaiseRuntimeError(-1556872960, PTL::IDS::smartStepLoad, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
          PTL::GetLoadingSequence(0, seq_TipsToUse);
          ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
          onerror goto errLabel_4 ;
          err.Clear();
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          int_tips_picked_up = 1;
          errLabel_4 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
          }   /* end if from skip handler if no error */
        }
      }
    }
    if (ret_RetryNextTipRack == 1)
    {
      if (var_TipSequenceCurrentPosition <= 96)
      {
        seq_TipsToUse.SetCurrentPosition(97);
      }
      else
      {
        if (var_TipSequenceCurrentPosition <= 192)
        {
          seq_TipsToUse.SetCurrentPosition(193);
        }
        else
        {
          if (var_TipSequenceCurrentPosition <= 288)
          {
            seq_TipsToUse.SetCurrentPosition(289);
          }
          else
          {
            if (var_TipSequenceCurrentPosition <= 384)
            {
              seq_TipsToUse.SetCurrentPosition(385);
            }
            else
            {
              if (var_TipSequenceCurrentPosition <= 480)
              {
                seq_TipsToUse.SetCurrentPosition(481);
              }
              else
              {
                if (var_TipSequenceCurrentPosition <= 576)
                {
                  seq_TipsToUse.SetCurrentPosition(577);
                }
                else
                {
                  if (var_TipSequenceCurrentPosition <= 672)
                  {
                    seq_TipsToUse.SetCurrentPosition(673);
                  }
                  else
                  {
                    if (var_TipSequenceCurrentPosition <= 768)
                    {
                      seq_TipsToUse.SetCurrentPosition(769);
                    }
                    else
                    {
                      if (var_TipSequenceCurrentPosition <= 864)
                      {
                        seq_TipsToUse.SetCurrentPosition(865);
                      }
                    }
                  }
                }
              }
            }
          }
        }
      }
      onerror goto errLabel_5 ;
      err.Clear();
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      errLabel_5 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        dialogHandle_3.SetOutput(Translate("The instrument is still having trouble picking up tips."), Translate("\n\nThe method will now abort."), Translate("\n\nIf this issue persists, please contact Hamilton Service."));
        dialogHandle_3.ShowOutput(Translate("Error Picking Up Tips"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        abort;
      }   /* end if from skip handler if no error */
    }
  }
  MECC::TraceComment(Translate("END TIP PICKUP ERROR HANDLING"));
}

private function TipPickupWithErrorHandling( sequence & seq_tipsForPickup ) void {
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod:  TipPickupWithErrorHandling <<<<<<<<<<"));
  onerror goto errLabel_6 ;
  err.Clear();
  STAR_TIP_TOOLS::TipCheck(ML_STAR, seq_tipsForPickup, Translate("tip_counter_1000"), 8);
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  errLabel_6 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    ErrorHandling_TipPickup(seq_tipsForPickup);
  }   /* end if from skip handler if no error */
  MECC::TraceComment(Translate(">>>>>>>>>> Submethod Complete:  TipPickupWithErrorHandling <<<<<<<<<<"));
}

private function Get_Tip_Use_Str( sequence & in_seq ) variable {
  private variable num_of_tips_needed;
  private variable tip_str;
  num_of_tips_needed = SeqGetTotal(in_seq);
  tip_str = "11111111";
  if (num_of_tips_needed == 2)
  {
    tip_str = "11000000";
  }
  if (num_of_tips_needed == 4)
  {
    tip_str = "11110000";
  }
  if (num_of_tips_needed == 6)
  {
    tip_str = "00111111";
  }
  return (tip_str);
}

private function DebuggingPause(  ) void {
  private dialog dialogHandle_7;
  dialogHandle_7.SetOutput(Translate("Click 'OK' to continue."));
  dialogHandle_7.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
}

private function GetParams(  ) void {
  private variable strain_1_id;
  private variable worklist_file_path;
  private variable dilution_factor_str;
  private variable loc;
  private variable loopCounter2;
  private variable read_line;
  private variable culture_volume_str;
  private file file1;
  private variable split_line[];
  private variable plasmid_key;
  private variable well_id;
  private variable has_key;
  private variable plasmid_id;
  private variable loopCounter1;
  private variable media_key;
  private variable media_type_arr[];
  private variable media_type;
  private variable loopCounter3;
  private variable media_id;
  private variable has_media_key;
  private dialog dialogHandle1;
  private variable media_source_col;
  MECC::TraceComment(Translate("***************************************************************************\nStart GetParams() submethod\n***************************************************************************"));
  HSLExtensions::Dictionary::CreateDictionary(Translate("param_dict"), 2);
  file1.AddField(1, read_line, hslString);
  file1.SetDelimiter(hslAsciiText);
  if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    while (
       (file1.Eof() == 0)
    )
    {
      loopCounter2 = loopCounter2 + 1;
      if( 0 == file1.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      loc = StrFind(read_line, ",");
      if (loc > 0)
      {
        split_line = HSLExtensions::String::Split(read_line, Translate(","), 1);
        HSLExtensions::Dictionary::AddItem(Translate("param_dict"), split_line.ElementAt( 1 -1), split_line.ElementAt( 2 -1));
      }
    }
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  worklist_file_path = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), Translate("worklistFile"));
  strain_1_id = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), Translate("strain1"));
  plasmid_id = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), Translate("plasmid_B1"));
  HSLExtensions::Dictionary::CreateDictionary(Translate("plasmid_by_well_dict"), 2);
  {
    loopCounter2 = 0;
    ML_STAR.Growth_Plate.SetCurrentPosition(1);
    while (
       (ML_STAR.Growth_Plate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.Growth_Plate, 1);
      loopCounter2 = loopCounter2 + 1;
      well_id = SeqGetPositionId(ML_STAR.Growth_Plate);
      plasmid_key = StrConcat2(Translate("plasmid_"), well_id);
      has_key = HSLExtensions::Dictionary::ExistsItem(Translate("param_dict"), plasmid_key);
      if (has_key == 1)
      {
        plasmid_id = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), plasmid_key);
        HSLExtensions::Dictionary::AddItem(Translate("plasmid_by_well_dict"), well_id, plasmid_id);
        TrcTrace4(Translate("well_id: "), well_id, Translate(", plasmid_id: "), plasmid_id);
      }
      SeqIncrement(ML_STAR.Growth_Plate, 1);
      if (
         (ML_STAR.Growth_Plate.GetCurrentPosition() > 0 && ML_STAR.Growth_Plate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.Growth_Plate.SetMax(ML_STAR.Growth_Plate.GetTotal());
    ML_STAR.Growth_Plate.SetCurrentPosition(1);
  }
  culture_volume_str = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), Translate("cultureVolume"));
  culture_volume = StrFVal(culture_volume_str);
  if (culture_volume > 500)
  {
    culture_volume = 500;
  }
  else
  {
    if (culture_volume < 200)
    {
      culture_volume = 200;
    }
  }
  dilution_factor_str = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), Translate("cultureDilutionFactor"));
  dilution_factor = StrFVal(dilution_factor_str);
  media_type_arr.SetSize(0);
  HSLExtensions::Dictionary::CreateDictionary(Translate("media_source_dict"), 2);
  {
    for(loopCounter1 = 0; loopCounter1 < 4;)
    {
      loopCounter1 = loopCounter1 + 1;
      media_key = StrConcat2(Translate("media_source_"), loopCounter1);
      media_type = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), media_key);
      media_type_arr.AddAsLast(media_type);
      HSLExtensions::Dictionary::AddItem(Translate("media_source_dict"), media_type, loopCounter1);
    }
  }
  media_source_for_col_arr.SetSize(0);
  {
    for(loopCounter3 = 0; loopCounter3 < 12;)
    {
      loopCounter3 = loopCounter3 + 1;
      media_key = StrConcat2(Translate("media_"), loopCounter3);
      has_key = HSLExtensions::Dictionary::ExistsItem(Translate("param_dict"), media_key);
      if (has_key == 1)
      {
        media_id = HSLExtensions::Dictionary::GetItem(Translate("param_dict"), media_key);
        if (media_id != "none")
        {
          has_media_key = HSLExtensions::Dictionary::ExistsItem(Translate("media_source_dict"), media_id);
          if (has_media_key == 1)
          {
            media_source_col = HSLExtensions::Dictionary::GetItem(Translate("media_source_dict"), media_id);
            media_source_for_col_arr.AddAsLast(media_source_col);
          }
          else
          {
            dialogHandle1.SetOutput(Translate("The media type for "), media_key, Translate(", "), media_id, Translate(" was not listed in the input file as a 'media_source_n' type."), Translate("So, no media will be added to column "), "\n", loopCounter3, Translate(" of the Growth Plate."));
            dialogHandle1.ShowOutput(Translate("Media ID not found!"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            media_source_for_col_arr.AddAsLast(0);
          }
        }
        else
        {
          media_source_for_col_arr.AddAsLast(0);
        }
      }
    }
  }
  MECC::TraceComment(Translate("***************************************************************************\nEnd GetParams() submethod\n***************************************************************************"));
}

private function CalculateOutputs(  ) void {
  private variable strain_1_id;
  private variable plasmid_1_id;
  private variable plasmid_4_id;
  private variable prop_arr[];
  MECC::TraceComment(Translate("**** CalculateOutputs sub-method ****"));
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "strain", "none");
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, "plasmid", "none");
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, Translate("strain"), strain_1_id);
  if (plasmid_4_id == "ignore")
  {
    SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, Translate("plasmid"), plasmid_1_id);
  }
  else
  {
    prop_arr.SetSize(0);
    prop_arr.AddAsLast(Translate("plasmid"));
  }
}

private function SaveWorklistAndMetadata(  ) void {
  private variable iniFilePath;
  private variable additive_1_units;
  private variable row_id;
  private variable well_id;
  private variable worklist_file_path;
  private variable plasmid;
  private variable strain;
  private variable additive_1_conc;
  private variable inducer_2_id;
  private variable position;
  private variable column_id;
  private variable inducer_1_units;
  private variable inducer_1_id;
  private variable inducer_2_units;
  private variable column_id_str;
  private variable iniDir;
  private variable inducer_2_conc;
  private variable loopCounter2;
  private variable inducer_1_conc;
  private variable iniExists;
  private variable additive_1_id;
  private file file1;
  MECC::TraceComment(Translate("**** SaveWorklist sub-method ****"));
  file1.AddField("position", position, hslInteger);
  file1.AddField("well", well_id, hslString, 255);
  file1.AddField("row", row_id, hslString, 255);
  file1.AddField("column", column_id, hslInteger);
  file1.AddField("inducer1Id", inducer_1_id, hslString, 255);
  file1.AddField("inducer1Concentration", inducer_1_conc, hslFloat);
  file1.AddField("inducer1Units", inducer_1_units, hslString, 255);
  file1.AddField("inducer2Id", inducer_2_id, hslString, 255);
  file1.AddField("inducer2Concentration", inducer_2_conc, hslFloat);
  file1.AddField("inducer2Units", inducer_2_units, hslString, 255);
  file1.AddField("selectorId", additive_1_id, hslString, 255);
  file1.AddField("selectorConc", additive_1_conc, hslString, 255);
  file1.AddField("selectorUnits", additive_1_units, hslString, 255);
  file1.AddField("strain", strain, hslString, 255);
  file1.AddField("plasmid", plasmid, hslString, 255);
  file1.SetDelimiter(hslCSVDelimited);
  if( 0 == file1.Open(worklist_file_path, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, worklist_file_path, "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    ML_STAR.Growth_Plate.SetCurrentPosition(1);
    while (
       (ML_STAR.Growth_Plate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.Growth_Plate, 1);
      loopCounter2 = loopCounter2 + 1;
      position = ML_STAR.Growth_Plate.GetCurrentPosition();
      well_id = SeqGetPositionId(ML_STAR.Growth_Plate);
      row_id = StrLeft(well_id, 1);
      column_id_str = StrMid(well_id, 1, 2);
      column_id = StrIVal(column_id_str);
      inducer_1_conc = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("inducer_1_conc"));
      inducer_2_conc = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("inducer_2_conc"));
      additive_1_conc = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("additive_conc"));
      strain = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("strain"));
      plasmid = SeqGetProperty(ML_STAR.Growth_Plate, position, Translate("plasmid"));
      if( 0 == file1.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      SeqIncrement(ML_STAR.Growth_Plate, 1);
      if (
         (ML_STAR.Growth_Plate.GetCurrentPosition() > 0 && ML_STAR.Growth_Plate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.Growth_Plate.SetMax(ML_STAR.Growth_Plate.GetTotal());
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  iniDir = HSLExtensions::File::GetDirectoryName(worklist_file_path);
  iniFilePath = iniDir + "\\schema.ini";
  iniExists = HSLExtensions::File::Exists(iniFilePath);
  if (iniExists == 1)
  {
    HSLExtensions::File::Delete(iniFilePath);
  }
}
