global device ML_STAR ("190205-Tutorial02Layout.lay", "ML_STAR", hslTrue);
#include "190205-Tutorial02Layout.res"
variable volume_left;
variable loopCounter1;
dialog customDialog_1;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    MECC::TraceComment(Translate("distribute the media"));
    {
      sequence arrseqAspirate_2[];
      sequence arrseqDispense_2[];
      arrseqAspirate_2.SetSize(1);
      arrseqAspirate_2.SetAt(0, ML_STAR.Media_source);
      arrseqDispense_2.SetSize(1);
      arrseqDispense_2.SetAt(0, ML_STAR.IPTG_5x);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 3);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 0);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslFalse);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 5);
      PTL::SetPipettingState("DispenseMode", 1);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_2, arrseqDispense_2, 1, 1, 700, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, ML_STAR.IPTG_5x) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    {
      sequence arrseqAspirate_3[];
      sequence arrseqDispense_3[];
      arrseqAspirate_3.SetSize(1);
      arrseqAspirate_3.SetAt(0, ML_STAR.Media_source);
      arrseqDispense_3.SetSize(1);
      arrseqDispense_3.SetAt(0, ML_STAR.Media_dispense);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 3);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 0);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 5);
      PTL::SetPipettingState("DispenseMode", 1);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_3, arrseqDispense_3, 1, 1, 450, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, ML_STAR.Media_dispense) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    {
      sequence arrseqAspirate_4[];
      sequence arrseqDispense_4[];
      arrseqAspirate_4.SetSize(1);
      arrseqAspirate_4.SetAt(0, ML_STAR.IPTG_stock);
      arrseqDispense_4.SetSize(1);
      arrseqDispense_4.SetAt(0, ML_STAR.IPTG_5x);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 3);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 0);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, arrseqAspirate_4, arrseqDispense_4, 1, 1, 200, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.IPTG_stock, ML_STAR.IPTG_5x) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    {
      sequence arrseqAspirate_5[];
      sequence arrseqDispense_5[];
      arrseqAspirate_5.SetSize(1);
      arrseqAspirate_5.SetAt(0, ML_STAR.IPTG_dilution_from);
      arrseqDispense_5.SetSize(1);
      arrseqDispense_5.SetAt(0, ML_STAR.IPTG_dilution_to);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 3);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 0);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslTrue);
      PTL::SetPipettingState("DispenseSequenceReducible", hslTrue);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      PTL::SetPipettingState("DispensePrerinsingMixCycles", 4);
      PTL::SetPipettingState("DispensePrerinsingMixPosition", 2);
      PTL::SetPipettingState("DispensePrerinsingMixVolume", 900);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_5, arrseqDispense_5, 1, 1, 450, 0, 1, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.IPTG_dilution_from, ML_STAR.IPTG_dilution_to) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    ML_STAR.Media_source.SetCurrentPosition(1);
    {
      	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
    }
    {
      	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
    }
    {
      sequence arrseqAspirate_6[];
      sequence arrseqDispense_6[];
      arrseqAspirate_6.SetSize(1);
      arrseqAspirate_6.SetAt(0, ML_STAR.Bacterial_stock_1);
      arrseqDispense_6.SetSize(1);
      arrseqDispense_6.SetAt(0, ML_STAR.Bacterial_10x_1);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 3);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 0);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("AspiratePrerinsingMixCycles", 10);
      PTL::SetPipettingState("AspiratePrerinsingMixPosition", 2);
      PTL::SetPipettingState("AspiratePrerinsingMixVolume", 200);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      PTL::SetPipettingState("DispensePrerinsingMixCycles", 10);
      PTL::SetPipettingState("DispensePrerinsingMixPosition", 2);
      PTL::SetPipettingState("DispensePrerinsingMixVolume", 200);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_6, arrseqDispense_6, 1, 1, 80, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Bacterial_stock_1, ML_STAR.Bacterial_10x_1) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    {
      sequence arrseqAspirate_7[];
      sequence arrseqDispense_7[];
      arrseqAspirate_7.SetSize(1);
      arrseqAspirate_7.SetAt(0, ML_STAR.Bacterial_stock_2);
      arrseqDispense_7.SetSize(1);
      arrseqDispense_7.SetAt(0, ML_STAR.Bacterial_10x_2);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 3);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 0);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("AspiratePrerinsingMixCycles", 10);
      PTL::SetPipettingState("AspiratePrerinsingMixPosition", 2);
      PTL::SetPipettingState("AspiratePrerinsingMixVolume", 200);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      PTL::SetPipettingState("DispensePrerinsingMixCycles", 10);
      PTL::SetPipettingState("DispensePrerinsingMixPosition", 2);
      PTL::SetPipettingState("DispensePrerinsingMixVolume", 200);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_7, arrseqDispense_7, 1, 1, 80, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Bacterial_stock_2, ML_STAR.Bacterial_10x_2) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    volume_left = 800;
    {
      loopCounter1 = 0;
      while (
         (ML_STAR.Bacterial_dilution_to.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Bacterial_10x_all, 1, ML_STAR.Bacterial_dilution_to, 1);
        loopCounter1 = loopCounter1 + 1;
        ML_STAR.Bacterial_10x_all.SetCurrentPosition(1);
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        volume_left = volume_left - 50;
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.Bacterial_dilution_to.GetCurrentPosition() > 0 && ML_STAR.Bacterial_dilution_to.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Bacterial_10x_all.SetMax(ML_STAR.Bacterial_10x_all.GetTotal());
      ML_STAR.Bacterial_dilution_to.SetMax(ML_STAR.Bacterial_dilution_to.GetTotal());
      ML_STAR.Bacterial_10x_all.SetCurrentPosition(1);
      ML_STAR.Bacterial_dilution_to.SetCurrentPosition(1);
    }
  } }
