global device ML_STAR ("190403-Parratt02.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
#include "190403-Parratt02.res"
variable loopCounter2;
variable loopCounter3;
global variable tip_counter_1000_channels;
global variable tip_counter_300_channels;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    Startup();
    {
      for(loopCounter2 = 0; loopCounter2 < 1;)
      {
        loopCounter2 = loopCounter2 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        {
          sequence arrseqAspirate_1[];
          sequence arrseqDispense_1[];
          arrseqAspirate_1.SetSize(1);
          arrseqAspirate_1.SetAt(0, ML_STAR.Media_source_8);
          arrseqDispense_1.SetSize(1);
          arrseqDispense_1.SetAt(0, ML_STAR.Bacteria_Dil_1);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 3);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 0);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 0);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
          PTL::SetPipettingState("DispenseFluidHeight", 5);
          PTL::SetPipettingState("DispenseMode", 1);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_1, arrseqDispense_1, 1, 1, 833, 0, 1, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source_8, ML_STAR.Bacteria_Dil_1) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
        {
          sequence arrseqAspirate_2[];
          sequence arrseqDispense_2[];
          arrseqAspirate_2.SetSize(1);
          arrseqAspirate_2.SetAt(0, ML_STAR.Media_source_4);
          arrseqDispense_2.SetSize(1);
          arrseqDispense_2.SetAt(0, ML_STAR.Bacteria_Dil_2);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 3);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 0);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 0);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
          PTL::SetPipettingState("DispenseFluidHeight", 5);
          PTL::SetPipettingState("DispenseMode", 1);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_2, arrseqDispense_2, 1, 1, 832.5, 0, 1, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source_4, ML_STAR.Bacteria_Dil_2) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
        {
          sequence arrseqAspirate_3[];
          sequence arrseqDispense_3[];
          arrseqAspirate_3.SetSize(1);
          arrseqAspirate_3.SetAt(0, ML_STAR.Media_source_8);
          arrseqDispense_3.SetSize(1);
          arrseqDispense_3.SetAt(0, ML_STAR.Bacteria_Dil_3);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 3);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 0);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 0);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
          PTL::SetPipettingState("DispenseFluidHeight", 5);
          PTL::SetPipettingState("DispenseMode", 1);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_3, arrseqDispense_3, 1, 1, 830, 0, 1, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source_8, ML_STAR.Bacteria_Dil_3) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
        {
          sequence arrseqAspirate_4[];
          sequence arrseqDispense_4[];
          arrseqAspirate_4.SetSize(1);
          arrseqAspirate_4.SetAt(0, ML_STAR.Media_source_4);
          arrseqDispense_4.SetSize(1);
          arrseqDispense_4.SetAt(0, ML_STAR.Bacteria_Dil_4);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 3);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 0);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 0);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
          PTL::SetPipettingState("DispenseFluidHeight", 5);
          PTL::SetPipettingState("DispenseMode", 1);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_4, arrseqDispense_4, 1, 1, 825, 0, 1, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source_4, ML_STAR.Bacteria_Dil_4) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
        {
          sequence arrseqAspirate_5[];
          sequence arrseqDispense_5[];
          arrseqAspirate_5.SetSize(1);
          arrseqAspirate_5.SetAt(0, ML_STAR.Media_source_8);
          arrseqDispense_5.SetSize(1);
          arrseqDispense_5.SetAt(0, ML_STAR.Bacteria_Dil_5);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 3);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 0);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 0);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
          PTL::SetPipettingState("DispenseFluidHeight", 5);
          PTL::SetPipettingState("DispenseMode", 1);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_5, arrseqDispense_5, 1, 1, 800, 0, 1, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source_8, ML_STAR.Bacteria_Dil_5) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
        {
          sequence arrseqAspirate_6[];
          sequence arrseqDispense_6[];
          arrseqAspirate_6.SetSize(1);
          arrseqAspirate_6.SetAt(0, ML_STAR.Media_source_4);
          arrseqDispense_6.SetSize(1);
          arrseqDispense_6.SetAt(0, ML_STAR.Bacteria_Dil_6);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 3);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 0);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 0);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
          PTL::SetPipettingState("DispenseFluidHeight", 5);
          PTL::SetPipettingState("DispenseMode", 1);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_6, arrseqDispense_6, 1, 1, 750, 0, 1, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source_4, ML_STAR.Bacteria_Dil_6) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
        {
          sequence arrseqAspirate_7[];
          sequence arrseqDispense_7[];
          arrseqAspirate_7.SetSize(1);
          arrseqAspirate_7.SetAt(0, ML_STAR.Media_source_4);
          arrseqDispense_7.SetSize(1);
          arrseqDispense_7.SetAt(0, ML_STAR.Bacteria_Dil_7);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 3);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 0);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 0);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
          PTL::SetPipettingState("DispenseFluidHeight", 5);
          PTL::SetPipettingState("DispenseMode", 1);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_7, arrseqDispense_7, 1, 1, 1000, 0, 1, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source_4, ML_STAR.Bacteria_Dil_7) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
        {
          sequence arrseqAspirate_8[];
          sequence arrseqDispense_8[];
          arrseqAspirate_8.SetSize(1);
          arrseqAspirate_8.SetAt(0, ML_STAR.Media_source_8);
          arrseqDispense_8.SetSize(1);
          arrseqDispense_8.SetAt(0, ML_STAR.Bacteria_Dil_Blank);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 3);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 0);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslFalse);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseSubmergeDepth", 0);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
          PTL::SetPipettingState("DispenseFluidHeight", 5);
          PTL::SetPipettingState("DispenseMode", 1);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_8, arrseqDispense_8, 1, 1, 625, 0, 1, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source_8, ML_STAR.Bacteria_Dil_Blank) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
    {
      for(loopCounter3 = 0; loopCounter3 < 1;)
      {
        loopCounter3 = loopCounter3 + 1;
        {
          sequence arrseqAspirate_9[];
          sequence arrseqDispense_9[];
          arrseqAspirate_9.SetSize(1);
          arrseqAspirate_9.SetAt(0, ML_STAR.Bacteria_Overnight);
          arrseqDispense_9.SetSize(1);
          arrseqDispense_9.SetAt(0, ML_STAR.Bacteria_Dil_1);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 3);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 0);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("AspiratePrerinsingMixCycles", 2);
          PTL::SetPipettingState("AspiratePrerinsingMixPosition", 2);
          PTL::SetPipettingState("AspiratePrerinsingMixVolume", 1000);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          PTL::SetPipettingState("DispensePrerinsingMixCycles", 2);
          PTL::SetPipettingState("DispensePrerinsingMixPosition", 2);
          PTL::SetPipettingState("DispensePrerinsingMixVolume", 1000);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_9, arrseqDispense_9, 1, 1, 1666, 0, 2, 1, hslInfinite, hslInfinite, "", ML_STAR.Bacteria_Overnight, ML_STAR.Bacteria_Dil_1) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
        {
          sequence arrseqAspirate_10[];
          sequence arrseqDispense_10[];
          arrseqAspirate_10.SetSize(1);
          arrseqAspirate_10.SetAt(0, ML_STAR.Bacteria_Dil_1);
          arrseqDispense_10.SetSize(1);
          arrseqDispense_10.SetAt(0, ML_STAR.Bacteria_Dil_2);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 3);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 0);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("AspiratePrerinsingMixCycles", 2);
          PTL::SetPipettingState("AspiratePrerinsingMixPosition", 2);
          PTL::SetPipettingState("AspiratePrerinsingMixVolume", 1000);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          PTL::SetPipettingState("DispensePrerinsingMixCycles", 2);
          PTL::SetPipettingState("DispensePrerinsingMixPosition", 2);
          PTL::SetPipettingState("DispensePrerinsingMixVolume", 1000);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_10, arrseqDispense_10, 1, 1, 3330, 0, 2, 1, hslInfinite, hslInfinite, "", ML_STAR.Bacteria_Dil_1, ML_STAR.Bacteria_Dil_2) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
        {
          sequence arrseqAspirate_11[];
          sequence arrseqDispense_11[];
          arrseqAspirate_11.SetSize(1);
          arrseqAspirate_11.SetAt(0, ML_STAR.Bacteria_Dil_2);
          arrseqDispense_11.SetSize(1);
          arrseqDispense_11.SetAt(0, ML_STAR.Bacteria_Dil_3);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 3);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 0);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("AspiratePrerinsingMixCycles", 2);
          PTL::SetPipettingState("AspiratePrerinsingMixPosition", 2);
          PTL::SetPipettingState("AspiratePrerinsingMixVolume", 1000);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          PTL::SetPipettingState("DispensePrerinsingMixCycles", 2);
          PTL::SetPipettingState("DispensePrerinsingMixPosition", 2);
          PTL::SetPipettingState("DispensePrerinsingMixVolume", 1000);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_11, arrseqDispense_11, 1, 1, 1660, 0, 2, 1, hslInfinite, hslInfinite, "", ML_STAR.Bacteria_Dil_2, ML_STAR.Bacteria_Dil_3) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
        {
          sequence arrseqAspirate_12[];
          sequence arrseqDispense_12[];
          arrseqAspirate_12.SetSize(1);
          arrseqAspirate_12.SetAt(0, ML_STAR.Bacteria_Dil_3);
          arrseqDispense_12.SetSize(1);
          arrseqDispense_12.SetAt(0, ML_STAR.Bacteria_Dil_4);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 3);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 0);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("AspiratePrerinsingMixCycles", 2);
          PTL::SetPipettingState("AspiratePrerinsingMixPosition", 2);
          PTL::SetPipettingState("AspiratePrerinsingMixVolume", 1000);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          PTL::SetPipettingState("DispensePrerinsingMixCycles", 2);
          PTL::SetPipettingState("DispensePrerinsingMixPosition", 2);
          PTL::SetPipettingState("DispensePrerinsingMixVolume", 1000);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_12, arrseqDispense_12, 1, 1, 3300, 0, 2, 1, hslInfinite, hslInfinite, "", ML_STAR.Bacteria_Dil_3, ML_STAR.Bacteria_Dil_4) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
        {
          sequence arrseqAspirate_13[];
          sequence arrseqDispense_13[];
          arrseqAspirate_13.SetSize(1);
          arrseqAspirate_13.SetAt(0, ML_STAR.Bacteria_Dil_4);
          arrseqDispense_13.SetSize(1);
          arrseqDispense_13.SetAt(0, ML_STAR.Bacteria_Dil_5);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 3);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 0);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("AspiratePrerinsingMixCycles", 2);
          PTL::SetPipettingState("AspiratePrerinsingMixPosition", 2);
          PTL::SetPipettingState("AspiratePrerinsingMixVolume", 1000);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          PTL::SetPipettingState("DispensePrerinsingMixCycles", 2);
          PTL::SetPipettingState("DispensePrerinsingMixPosition", 2);
          PTL::SetPipettingState("DispensePrerinsingMixVolume", 1000);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_13, arrseqDispense_13, 1, 1, 1600, 0, 2, 1, hslInfinite, hslInfinite, "", ML_STAR.Bacteria_Dil_4, ML_STAR.Bacteria_Dil_5) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
        {
          sequence arrseqAspirate_14[];
          sequence arrseqDispense_14[];
          arrseqAspirate_14.SetSize(1);
          arrseqAspirate_14.SetAt(0, ML_STAR.Bacteria_Dil_5);
          arrseqDispense_14.SetSize(1);
          arrseqDispense_14.SetAt(0, ML_STAR.Bacteria_Dil_6);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 3);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 0);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("AspiratePrerinsingMixCycles", 2);
          PTL::SetPipettingState("AspiratePrerinsingMixPosition", 2);
          PTL::SetPipettingState("AspiratePrerinsingMixVolume", 1000);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          PTL::SetPipettingState("DispensePrerinsingMixCycles", 2);
          PTL::SetPipettingState("DispensePrerinsingMixPosition", 2);
          PTL::SetPipettingState("DispensePrerinsingMixVolume", 1000);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_14, arrseqDispense_14, 1, 1, 3000, 0, 2, 1, hslInfinite, hslInfinite, "", ML_STAR.Bacteria_Dil_5, ML_STAR.Bacteria_Dil_6) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
        {
          sequence arrseqAspirate_15[];
          sequence arrseqDispense_15[];
          arrseqAspirate_15.SetSize(1);
          arrseqAspirate_15.SetAt(0, ML_STAR.Bacteria_Dil_6);
          arrseqDispense_15.SetSize(1);
          arrseqDispense_15.SetAt(0, ML_STAR.Bacteria_Dil_7);
          PTL::ResetPipettingStateAndSequences("");
          PTL::SetPipettingState("UserResponseTime", hslInfinite);
          PTL::SetPipettingState("ErrorHandling", 3);
          PTL::SetPipettingState("TipCountingEnabled", hslFalse);
          PTL::SetPipettingState("TipCountingIdentifier", "");
          PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
          PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
          PTL::SetPipettingState("CalibrateCarrierChannel", -1);
          PTL::SetPipettingState("InitializeCustomStepID", 0);
          PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
          PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
          PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
          PTL::SetPipettingState("TipPickupCustomStepID", 0);
          PTL::SetPipettingState("TipEjectCustomStepID", 0);
          PTL::SetPipettingState("AspirateCustomStepID", 0);
          PTL::SetPipettingState("DispenseCustomStepID", 0);
          PTL::SetPipettingState("PreDispenseCustomStepID", 0);
          PTL::SetPipettingState("PostDispenseCustomStepID", 0);
          PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
          PTL::SetPipettingState("InitializeChannelVariable", "");
          PTL::SetPipettingState("InitializeEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupChannelVariable", "");
          PTL::SetPipettingState("TipPickupEnabled", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
          PTL::SetPipettingState("TipEjectChannelVariable", "");
          PTL::SetPipettingState("AspirateMode", 0);
          PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
          PTL::SetPipettingState("AspirateFluidHeight", 0);
          PTL::SetPipettingState("AspirateSubmergeDepth", 2);
          PTL::SetPipettingState("AspirateChannelVariable", "");
          PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
          PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
          PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
          PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
          PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
          PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
          PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
          PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
          PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
          PTL::SetPipettingState("AspiratePrerinsingMixCycles", 2);
          PTL::SetPipettingState("AspiratePrerinsingMixPosition", 2);
          PTL::SetPipettingState("AspiratePrerinsingMixVolume", 1000);
          PTL::SetPipettingState("DispenseSubmergeDepth", 2);
          PTL::SetPipettingState("DispenseChannelVariable", "");
          PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
          PTL::SetPipettingState("DispenseFluidHeight", 0);
          PTL::SetPipettingState("DispenseMode", 3);
          PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
          PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
          PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
          PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
          PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
          PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
          PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
          PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
          PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
          PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
          PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
          PTL::SetPipettingState("DispensePrerinsingMixCycles", 2);
          PTL::SetPipettingState("DispensePrerinsingMixPosition", 2);
          PTL::SetPipettingState("DispensePrerinsingMixVolume", 1000);
          if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_15, arrseqDispense_15, 1, 1, 1000, 0, 2, 1, hslInfinite, hslInfinite, "", ML_STAR.Bacteria_Dil_6, ML_STAR.Bacteria_Dil_7) )
          {
                PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
        }
      }
    }
    {
      sequence arrseqAspirate_16[];
      sequence arrseqDispense_16[];
      arrseqAspirate_16.SetSize(1);
      arrseqAspirate_16.SetAt(0, ML_STAR.Bacterial_From);
      arrseqDispense_16.SetSize(1);
      arrseqDispense_16.SetAt(0, ML_STAR.Bacteria_To);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 3);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 0);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("AspiratePrerinsingMixCycles", 2);
      PTL::SetPipettingState("AspiratePrerinsingMixPosition", 2);
      PTL::SetPipettingState("AspiratePrerinsingMixVolume", 300);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 5);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, arrseqAspirate_16, arrseqDispense_16, 1, 1, 83, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Bacterial_From, ML_STAR.Bacteria_To) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
  } }
