 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLExtensions\\Directory.hsl" }
 namespace _Method { #include "HSLTimLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
#include "8 channel 300 uL mix and pipette test.res"
sequence tip_seq_arr[];
variable tip_counter_array[];
variable pipette_volume;
variable mix_volume;
global device ML_STAR ("8 channel 300 uL mix and pipette test.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    StartUp();
    MECC::TraceComment(Translate("==========================================\nTransfer cells from old GP to cytometry plate\n=========================================="));
    pipette_volume = 5;
    mix_volume = 150;
    {
      sequence arrseqAspirate_1[];
      sequence arrseqDispense_1[];
      arrseqAspirate_1.SetSize(1);
      arrseqAspirate_1.SetAt(0, ML_STAR.Old_Growth_Plate_parking);
      arrseqDispense_1.SetSize(1);
      arrseqDispense_1.SetAt(0, ML_STAR.Cytometer_Plate_1);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 12);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 11);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateFluidHeight", 1);
      PTL::SetPipettingState("AspirateSubmergeDepth", 0);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslFalse);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("AspiratePrerinsingMixCycles", 2);
      PTL::SetPipettingState("AspiratePrerinsingMixPosition", 0);
      PTL::SetPipettingState("AspiratePrerinsingMixVolume", mix_volume);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslTrue);
      PTL::SetPipettingState("DispenseSequenceReducible", hslTrue);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_300_Channels, arrseqAspirate_1, arrseqDispense_1, 1, 1, pipette_volume, 0, 1, hslInfinite, hslInfinite, 1, "", ML_STAR.Old_Growth_Plate_parking, ML_STAR.Cytometer_Plate_1) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
  } }
