#include "96 tip pickups.res"
global device ML_STAR ("96 tip pickups.lay", "ML_STAR", hslTrue);
dialog dialogHandle_1;
dialog dialogHandle_2;
dialog dialogHandle_3;
dialog dialogHandle1;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    if(0){
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      dialogHandle1.SetOutput(Translate(""));
      dialogHandle1.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      dialogHandle_2.SetOutput(Translate(""));
      dialogHandle_2.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      dialogHandle_1.SetOutput(Translate(""));
      dialogHandle_1.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      dialogHandle_3.SetOutput(Translate(""));
      dialogHandle_3.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  } }
