global device ML_STAR ("Double Nalgene trough test.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
#include "Double Nalgene trough test.res"
variable tip_counter_1000_channels;
variable tip_counter_300_channels;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    tip_counter_1000_channels = Translate("Tips_for_channels_1000");
    tip_counter_300_channels = Translate("Tips_for_channels_300");
    TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, tip_counter_1000_channels, ML_STAR, 100);
    TipCount::Edit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, tip_counter_300_channels, ML_STAR, 100);
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
    if(0){
      {
        sequence arrseqAspirate_1[];
        sequence arrseqDispense_1[];
        arrseqAspirate_1.SetSize(1);
        arrseqAspirate_1.SetAt(0, ML_STAR.Nalgene_double_trough_0001);
        arrseqDispense_1.SetSize(1);
        arrseqDispense_1.SetAt(0, ML_STAR.Fourtitude_Growth_Plate_0001);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 3);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 0);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseSubmergeDepth", 0);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
        PTL::SetPipettingState("DispenseFluidHeight", 5);
        PTL::SetPipettingState("DispenseMode", 1);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_1, arrseqDispense_1, 1, 1, 450, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Nalgene_double_trough_0001, ML_STAR.Fourtitude_Growth_Plate_0001) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
      {
        sequence arrseqAspirate_2[];
        sequence arrseqDispense_2[];
        arrseqAspirate_2.SetSize(1);
        arrseqAspirate_2.SetAt(0, ML_STAR.Media_for_300_tips);
        arrseqDispense_2.SetSize(1);
        arrseqDispense_2.SetAt(0, ML_STAR.Fourtitude_Growth_Plate_0001);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 3);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 0);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -9);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseSubmergeDepth", 2);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
        PTL::SetPipettingState("DispenseFluidHeight", 0);
        PTL::SetPipettingState("DispenseMode", 3);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -9);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, arrseqAspirate_2, arrseqDispense_2, 1, 1, 50, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_for_300_tips, ML_STAR.Fourtitude_Growth_Plate_0001) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
    COMMON96HEADSUBMETHODS::_ExitLibrary();
  } }
