 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
#include "Gradient pipetting with beads test.res"
variable tip_counter_50_channels;
variable tip_counter_1000_channels;
variable tip_counter_300_channels;
variable tip_counter_array[];
variable pipette_vol;
variable culture_vol;
global device ML_STAR ("Gradient pipetting with beads test.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    COMMON96HEADSUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    TIP_HANDLING_WITH_96_HEAD::GetTipCounters(tip_counter_array, 1);
    tip_counter_1000_channels=tip_counter_array.GetAt(1-1);
    tip_counter_300_channels=tip_counter_array.GetAt(2-1);
    tip_counter_50_channels=tip_counter_array.GetAt(3-1);
    TipCount::Read2(ML_STAR.Tips_1000_Channels, tip_counter_1000_channels, ML_STAR);
    TipCount::Read2(ML_STAR.Tips_300_Channels, tip_counter_300_channels, ML_STAR);
    TipCount::Read2(ML_STAR.Tips_50_Channels, tip_counter_50_channels, ML_STAR);
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    culture_vol = 425;
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    {
      sequence arrseqAspirate_1[];
      sequence arrseqDispense_1[];
      arrseqAspirate_1.SetSize(1);
      arrseqAspirate_1.SetAt(0, ML_STAR.GP_3_H2);
      arrseqDispense_1.SetSize(1);
      arrseqDispense_1.SetAt(0, ML_STAR.GP_3_H2_copy);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 3);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 0);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslFalse);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 4);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("AspiratePrerinsingMixCycles", 2);
      PTL::SetPipettingState("AspiratePrerinsingMixPosition", 0);
      PTL::SetPipettingState("AspiratePrerinsingMixVolume", 300);
      PTL::SetPipettingState("DispenseSubmergeDepth", 1);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslTrue);
      PTL::SetPipettingState("DispenseSequenceReducible", hslTrue);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_300_Channels, arrseqAspirate_1, arrseqDispense_1, 1, 1, 300, 0, 1, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.GP_3_H2, ML_STAR.GP_3_H2_copy) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    {
      sequence arrseqAspirate_2[];
      sequence arrseqDispense_2[];
      arrseqAspirate_2.SetSize(1);
      arrseqAspirate_2.SetAt(0, ML_STAR.GP_3_H2);
      arrseqDispense_2.SetSize(1);
      arrseqDispense_2.SetAt(0, ML_STAR.GP_3_A2);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 3);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 0);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslFalse);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 2);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 5);
      PTL::SetPipettingState("DispenseMode", 1);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslTrue);
      PTL::SetPipettingState("DispenseSequenceReducible", hslTrue);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_300_Channels, arrseqAspirate_2, arrseqDispense_2, 1, 1, culture_vol, 0, 1, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.GP_3_H2, ML_STAR.GP_3_A2) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    TipCount::Write2(ML_STAR.Tips_1000_Channels, tip_counter_1000_channels, ML_STAR);
    TipCount::Write2(ML_STAR.Tips_300_Channels, tip_counter_300_channels, ML_STAR);
    TipCount::Write2(ML_STAR.Tips_50_Channels, tip_counter_50_channels, ML_STAR);
    COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR);
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
  } }
