#include "fill plate test methods.res"
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
global device ML_STAR ("fill plate test methods.lay", "ML_STAR", hslTrue);
sequence tip_seq_arr[];
variable tip_counter_array[];
dialog dialogHandle1;
variable pipette_vol;
dialog dialogHandle_1;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    COMMON96HEADSUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    StartUp();
    pipette_vol = 50;
    dialogHandle_1.SetInputSize(1);
    dialogHandle_1.SetInputField(0, Translate("volume?: "), hslFloat, pipette_vol, 0, 200);
    dialogHandle_1.ShowInput("", hslInfinite, hslOKOnly | hslDefButton1);
    pipette_vol = dialogHandle_1.GetInputField(0);
    {
      sequence arrseqAspirate_2[];
      sequence arrseqDispense_2[];
      arrseqAspirate_2.SetSize(1);
      arrseqAspirate_2.SetAt(0, ML_STAR.Agilent_single_cavity_12_col_pyr_bottom_290_mL_reservoir_with_lid_0001);
      arrseqDispense_2.SetSize(1);
      arrseqDispense_2.SetAt(0, ML_STAR.Eppendorf_96_well_DNA_lo_bind_elution_plate_0001);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 3);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 0);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslTrue);
      PTL::SetPipettingState("DispenseSequenceReducible", hslTrue);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_300_Channels, arrseqAspirate_2, arrseqDispense_2, 1, 1, pipette_vol, 0, 1, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Agilent_single_cavity_12_col_pyr_bottom_290_mL_reservoir_with_lid_0001, ML_STAR.Eppendorf_96_well_DNA_lo_bind_elution_plate_0001) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    CleanUp();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
  } }
