global device ML_STAR ("Flat Thermoshake test.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLInhecoTEC\\HSLInhecoTECLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
#include "Flat Thermoshake test.res"
variable _intThermoshakeControlID;
variable _intThermoshakeDeviceID;
variable _blnSimulationMode;
dialog dialogHandle_1;
dialog dialogHandle_2;
dialog dialogHandle_3;
dialog dialogHandle_4;
variable strThermoshakeErrorCode;
variable blnThermoshakeSuccess;
timer timer1;
dialog dialogHandle_5;
dialog dialogHandle_6;
variable set_temperature;
dialog dialogHandle_7;
variable actual_temperature;
variable user_choice;
variable loopCounter1;
dialog dialogHandle_8;
dialog dialogHandle_9;
dialog dialogHandle_10;
variable comp_temperature;
dialog dialogHandle_11;
dialog dialogHandle_12;
dialog dialogHandle_13;
dialog dialogHandle_14;
dialog dialogHandle_15;
dialog dialogHandle_16;
dialog dialogHandle_17;
dialog dialogHandle_18;
dialog dialogHandle_19;
dialog dialogHandle_20;
dialog dialogHandle_21;
dialog dialogHandle_22;
dialog dialogHandle_23;
dialog dialogHandle_24;
dialog dialogHandle_25;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ThermoShakeInit();
    if(0){
      blnThermoshakeSuccess = HSLInhecoTECLib::SetShakerRevolutions(_intThermoshakeControlID, _intThermoshakeDeviceID, 600, strThermoshakeErrorCode);
      if (blnThermoshakeSuccess == 0)
      {
        dialogHandle_1.SetOutput(Translate("Thremoshake error"));
        dialogHandle_1.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        abort;
      }
      blnThermoshakeSuccess = HSLInhecoTECLib::SetShakerShape(_intThermoshakeControlID, _intThermoshakeDeviceID, 1, strThermoshakeErrorCode);
      if (blnThermoshakeSuccess == 0)
      {
        dialogHandle_4.SetOutput(Translate("Thremoshake error"));
        dialogHandle_4.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        abort;
      }
      blnThermoshakeSuccess = HSLInhecoTECLib::StartShaker(_intThermoshakeControlID, _intThermoshakeDeviceID, strThermoshakeErrorCode);
      if (blnThermoshakeSuccess == 0)
      {
        dialogHandle_3.SetOutput(Translate("Thremoshake error"));
        dialogHandle_3.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        abort;
      }
      if( 0 == timer1.SetTimer(20) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == timer1.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      blnThermoshakeSuccess = HSLInhecoTECLib::StopShaker(_intThermoshakeControlID, _intThermoshakeDeviceID, strThermoshakeErrorCode);
      if (blnThermoshakeSuccess == 0)
      {
        dialogHandle_2.SetOutput(Translate("Thremoshake error"));
        dialogHandle_2.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        abort;
      }
      {
        sequence arrseqAspirate_26[];
        sequence arrseqDispense_26[];
        arrseqAspirate_26.SetSize(1);
        arrseqAspirate_26.SetAt(0, ML_STAR.media_source);
        arrseqDispense_26.SetSize(1);
        arrseqDispense_26.SetAt(0, ML_STAR.Water_test_plate);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 3);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 0);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseSubmergeDepth", 0);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
        PTL::SetPipettingState("DispenseFluidHeight", 5);
        PTL::SetPipettingState("DispenseMode", 1);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslTrue);
        PTL::SetPipettingState("DispenseSequenceReducible", hslTrue);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_26, arrseqDispense_26, 1, 1, 500, 0, 1, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.media_source, ML_STAR.Water_test_plate) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
    }
    dialogHandle_7.SetInputSize(1);
    dialogHandle_7.SetInputField(0, Translate("Set temperature?"), hslFloat, 37, 0, 80);
    dialogHandle_7.ShowInput("", hslInfinite, hslOKOnly | hslDefButton1);
    set_temperature = dialogHandle_7.GetInputField(0);
    blnThermoshakeSuccess = HSLInhecoTECLib::SetTargetTemperature(_intThermoshakeControlID, _intThermoshakeDeviceID, set_temperature, strThermoshakeErrorCode);
    if (blnThermoshakeSuccess == 0)
    {
      dialogHandle_5.SetOutput(Translate("Thremoshake error: "), "\n", strThermoshakeErrorCode);
      dialogHandle_5.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      abort;
    }
    blnThermoshakeSuccess = HSLInhecoTECLib::StartTemperatureControl(_intThermoshakeControlID, _intThermoshakeDeviceID, strThermoshakeErrorCode);
    if (blnThermoshakeSuccess == 0)
    {
      dialogHandle_6.SetOutput(Translate("Thremoshake error: "), "\n", strThermoshakeErrorCode);
      dialogHandle_6.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      abort;
    }
    user_choice = 1;
    {
      loopCounter1 = 0;
      while (user_choice == 1)
      {
        loopCounter1 = loopCounter1 + 1;
        HSLInhecoTECLib::GetActualDeviceTemperature(_intThermoshakeControlID, _intThermoshakeDeviceID, 1, actual_temperature, strThermoshakeErrorCode);
        if (blnThermoshakeSuccess == 0)
        {
          dialogHandle_8.SetOutput(Translate("Thremoshake error: "), "\n", strThermoshakeErrorCode);
          dialogHandle_8.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          abort;
        }
        HSLInhecoTECLib::GetActualDeviceTemperature(_intThermoshakeControlID, _intThermoshakeDeviceID, 3, comp_temperature, strThermoshakeErrorCode);
        if (blnThermoshakeSuccess == 0)
        {
          dialogHandle_10.SetOutput(Translate("Thremoshake error: "), "\n", strThermoshakeErrorCode);
          dialogHandle_10.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          abort;
        }
        dialogHandle_11.SetOutput(Translate("actual temperature: "), actual_temperature, "\n", Translate("comp temperature: "), comp_temperature);
        user_choice = dialogHandle_11.ShowOutput("", hslOKCancel | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    blnThermoshakeSuccess = HSLInhecoTECLib::StopTemperatureControl(_intThermoshakeControlID, _intThermoshakeDeviceID, strThermoshakeErrorCode);
    if (blnThermoshakeSuccess == 0)
    {
      dialogHandle_9.SetOutput(Translate("Thremoshake error: "), "\n", strThermoshakeErrorCode);
      dialogHandle_9.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      abort;
    }
    if(0){
      dialogHandle_12.SetInputSize(1);
      dialogHandle_12.SetInputField(0, Translate("Set temperature?"), hslFloat, 37, 0, 80);
      dialogHandle_12.ShowInput("", hslInfinite, hslOKOnly | hslDefButton1);
      set_temperature = dialogHandle_12.GetInputField(0);
      blnThermoshakeSuccess = HSLInhecoTECLib::SetTargetTemperature(_intThermoshakeControlID, _intThermoshakeDeviceID, set_temperature, strThermoshakeErrorCode);
      if (blnThermoshakeSuccess == 0)
      {
        dialogHandle_16.SetOutput(Translate("Thremoshake error: "), "\n", strThermoshakeErrorCode);
        dialogHandle_16.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        abort;
      }
      blnThermoshakeSuccess = HSLInhecoTECLib::StartTemperatureControl(_intThermoshakeControlID, _intThermoshakeDeviceID, strThermoshakeErrorCode);
      if (blnThermoshakeSuccess == 0)
      {
        dialogHandle_15.SetOutput(Translate("Thremoshake error: "), "\n", strThermoshakeErrorCode);
        dialogHandle_15.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        abort;
      }
      user_choice = 1;
      {
        loopCounter1 = 0;
        while (user_choice == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          HSLInhecoTECLib::GetActualDeviceTemperature(_intThermoshakeControlID, _intThermoshakeDeviceID, 1, actual_temperature, strThermoshakeErrorCode);
          if (blnThermoshakeSuccess == 0)
          {
            dialogHandle_17.SetOutput(Translate("Thremoshake error: "), "\n", strThermoshakeErrorCode);
            dialogHandle_17.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            abort;
          }
          HSLInhecoTECLib::GetActualDeviceTemperature(_intThermoshakeControlID, _intThermoshakeDeviceID, 3, comp_temperature, strThermoshakeErrorCode);
          if (blnThermoshakeSuccess == 0)
          {
            dialogHandle_14.SetOutput(Translate("Thremoshake error: "), "\n", strThermoshakeErrorCode);
            dialogHandle_14.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            abort;
          }
          dialogHandle_18.SetOutput(Translate("actual temperature: "), actual_temperature, "\n", Translate("comp temperature: "), comp_temperature);
          user_choice = dialogHandle_18.ShowOutput("", hslOKCancel | hslInformation | hslDefButton1, hslInfinite);
        }
      }
      blnThermoshakeSuccess = HSLInhecoTECLib::SetShakerRevolutions(_intThermoshakeControlID, _intThermoshakeDeviceID, 600, strThermoshakeErrorCode);
      if (blnThermoshakeSuccess == 0)
      {
        dialogHandle_20.SetOutput(Translate("Thremoshake error"));
        dialogHandle_20.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        abort;
      }
      blnThermoshakeSuccess = HSLInhecoTECLib::SetShakerShape(_intThermoshakeControlID, _intThermoshakeDeviceID, 1, strThermoshakeErrorCode);
      if (blnThermoshakeSuccess == 0)
      {
        dialogHandle_19.SetOutput(Translate("Thremoshake error"));
        dialogHandle_19.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        abort;
      }
      blnThermoshakeSuccess = HSLInhecoTECLib::StartShaker(_intThermoshakeControlID, _intThermoshakeDeviceID, strThermoshakeErrorCode);
      if (blnThermoshakeSuccess == 0)
      {
        dialogHandle_21.SetOutput(Translate("Thremoshake error"));
        dialogHandle_21.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        abort;
      }
      user_choice = 1;
      {
        loopCounter1 = 0;
        while (user_choice == 1)
        {
          loopCounter1 = loopCounter1 + 1;
          HSLInhecoTECLib::GetActualDeviceTemperature(_intThermoshakeControlID, _intThermoshakeDeviceID, 1, actual_temperature, strThermoshakeErrorCode);
          if (blnThermoshakeSuccess == 0)
          {
            dialogHandle_24.SetOutput(Translate("Thremoshake error: "), "\n", strThermoshakeErrorCode);
            dialogHandle_24.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            abort;
          }
          HSLInhecoTECLib::GetActualDeviceTemperature(_intThermoshakeControlID, _intThermoshakeDeviceID, 3, comp_temperature, strThermoshakeErrorCode);
          if (blnThermoshakeSuccess == 0)
          {
            dialogHandle_23.SetOutput(Translate("Thremoshake error: "), "\n", strThermoshakeErrorCode);
            dialogHandle_23.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            abort;
          }
          dialogHandle_25.SetOutput(Translate("actual temperature: "), actual_temperature, "\n", Translate("comp temperature: "), comp_temperature);
          user_choice = dialogHandle_25.ShowOutput("", hslOKCancel | hslInformation | hslDefButton1, hslInfinite);
        }
      }
      blnThermoshakeSuccess = HSLInhecoTECLib::StopShaker(_intThermoshakeControlID, _intThermoshakeDeviceID, strThermoshakeErrorCode);
      if (blnThermoshakeSuccess == 0)
      {
        dialogHandle_22.SetOutput(Translate("Thremoshake error"));
        dialogHandle_22.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        abort;
      }
      blnThermoshakeSuccess = HSLInhecoTECLib::StopTemperatureControl(_intThermoshakeControlID, _intThermoshakeDeviceID, strThermoshakeErrorCode);
      if (blnThermoshakeSuccess == 0)
      {
        dialogHandle_13.SetOutput(Translate("Thremoshake error: "), "\n", strThermoshakeErrorCode);
        dialogHandle_13.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        abort;
      }
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      {
        sequence arrseqAspirate_27[];
        sequence arrseqDispense_27[];
        arrseqAspirate_27.SetSize(1);
        arrseqAspirate_27.SetAt(0, ML_STAR.media_source);
        arrseqDispense_27.SetSize(1);
        arrseqDispense_27.SetAt(0, ML_STAR.pipette_to);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 3);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 0);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseSubmergeDepth", 0);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
        PTL::SetPipettingState("DispenseFluidHeight", 5);
        PTL::SetPipettingState("DispenseMode", 1);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_27, arrseqDispense_27, 1, 1, 500, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.media_source, ML_STAR.pipette_to) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
    }
    ThermoShakeShutDown();
  } }
