private function ThermoShakeInit(  ) void ;
private function ThermoShakeShutDown(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  ThermoShakeShutDown();
}

private function ThermoShakeInit(  ) void {
  private variable strThermoshakeErrorCode;
  private variable blnThermoshakeSuccess;
  private dialog dialogHandle_1;
  private variable actualTemperature;
  private dialog dialogHandle_2;
  private variable reservoirStatus;
  private dialog dialogHandle_3;
  private dialog dialogHandle2;
  private dialog dialogHandle_4;
  _blnSimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
  _intThermoshakeControlID = 0;
  TrcTrace(Translate("_intThermoshakeControlID = "), _intThermoshakeControlID);
  _intThermoshakeDeviceID = 1;
  TrcTrace(Translate("_intThermoshakeDeviceID = "), _intThermoshakeDeviceID);
  blnThermoshakeSuccess = HSLInhecoTECLib::Initialize(_intThermoshakeControlID, _blnSimulationMode, strThermoshakeErrorCode);
  if (blnThermoshakeSuccess == 0)
  {
    dialogHandle_1.SetOutput(Translate("Thremoshake error on init"));
    dialogHandle_1.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    abort;
  }
  if(0){
    blnThermoshakeSuccess = HSLInhecoTECLib::GetActualDeviceTemperature(_intThermoshakeControlID, _intThermoshakeDeviceID, 1, actualTemperature, strThermoshakeErrorCode);
    dialogHandle2.SetOutput(Translate("actual temperature: "), actualTemperature);
    dialogHandle2.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    if (blnThermoshakeSuccess == 0)
    {
      dialogHandle_2.SetOutput(Translate("Thremoshake error"));
      dialogHandle_2.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      abort;
    }
  }
  blnThermoshakeSuccess = HSLInhecoTECLib::GetReservoirStatus(_intThermoshakeControlID, _intThermoshakeDeviceID, reservoirStatus, strThermoshakeErrorCode);
  if (blnThermoshakeSuccess == 0)
  {
    dialogHandle_3.SetOutput(Translate("Thremoshake error"));
    dialogHandle_3.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    abort;
  }
  if (reservoirStatus == 0)
  {
    dialogHandle_4.SetOutput(Translate("Please fill the ThermoShake reservoir"), "\n", Translate("Reservoir status: "), reservoirStatus);
    dialogHandle_4.ShowOutput(Translate("ThermoShake Reservoir Low"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    abort;
  }
}

private function ThermoShakeShutDown(  ) void {
  private variable strThermoshakeErrorCode;
  private variable blnThermoshakeSuccess;
  private dialog dialogHandle_5;
  blnThermoshakeSuccess = HSLInhecoTECLib::StopTemperatureControl(_intThermoshakeControlID, _intThermoshakeDeviceID, strThermoshakeErrorCode);
  if (blnThermoshakeSuccess == 0)
  {
    dialogHandle_5.SetOutput(Translate("Thremoshake error on init"));
    dialogHandle_5.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    abort;
  }
  HSLInhecoTECLib::Terminate(1);
}
