global device ML_STAR ("Lid movement from stacker test.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "Common\\iSWAP-PlateAndLidMovement.hs_" }
 namespace _Method { #include "NIST\\Libraries\\NIST_TruSeqNano_Processes.hs_" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
#include "Lid movement from stacker test.res"
dialog dialogHandle2;
variable loop_num;
variable loopCounter1;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ISWAP_PLATEANDLIDMOVEMENT::_InitLibrary();
    NIST_TRUSEQNANO_PROCESSES::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    dialogHandle2.SetInputSize(1);
    dialogHandle2.SetInputField(0, Translate("how many reps?"), hslInteger, 50, 1, 200);
    dialogHandle2.ShowInput("", hslInfinite, hslOKOnly | hslDefButton1);
    loop_num = dialogHandle2.GetInputField(0);
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    {
      for(loopCounter1 = 0; loopCounter1 < loop_num;)
      {
        loopCounter1 = loopCounter1 + 1;
        MECC::TraceComment(Translate("********************************************************************************************"));
        TrcTrace(Translate("loop number: "), loopCounter1);
        MECC::TraceComment(Translate("********************************************************************************************"));
        ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Pooling_Plate_lid, ML_STAR.Pooling_Plate_Lid_Parking, 0, 1, ML_STAR);
        if(0){
          ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Sample_Plate_lid, ML_STAR.Sample_Plate_Lid_Parking, 0, 1, ML_STAR);
          ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_lid, ML_STAR.PCR_Plate_Lid_Parking, 0, 1, ML_STAR);
        }
        ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.Primer_Plate_lid, ML_STAR.Primer_Plate_Lid_Parking, 0, 1, ML_STAR);
        ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Pooling_Plate_Lid_Parking, ML_STAR.Pooling_Plate_lid, 0, 1, ML_STAR);
        ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.Primer_Plate_Lid_Parking, ML_STAR.Primer_Plate_lid, 0, 1, ML_STAR);
        if(0){
          ISWAP_PLATEANDLIDMOVEMENT::MoveComfortLid(ML_STAR.PCR_Plate_Lid_Parking, ML_STAR.PCR_Plate_lid, 0, 1, ML_STAR);
          ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Sample_Plate_Lid_Parking, ML_STAR.Sample_Plate_lid, 1, 1, ML_STAR);
        }
      }
    }
    ISWAP_PLATEANDLIDMOVEMENT::_ExitLibrary();
    NIST_TRUSEQNANO_PROCESSES::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
  } }
