 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
#include "Growth plate movement test.res"
variable loopCounter1;
global device ML_STAR ("Growth plate movement test.lay", "ML_STAR", hslTrue);
variable x_acceleration;
variable check_lid_on_put;
variable grip_opening;
variable plate_press;
variable z_speed;
variable check_lid_on_get;
variable grip_width;
variable grip_speed;
variable grip_force;
variable grip_height;
variable front_channel;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    grip_height = 4;
    grip_width = 84.5;
    grip_opening = 88;
    grip_force = 5;
    z_speed = 75;
    grip_speed = 277;
    check_lid_on_get = 0;
    check_lid_on_put = 1;
    x_acceleration = 2;
    plate_press = 0.5;
    {
      for(loopCounter1 = 0; loopCounter1 < 100;)
      {
        loopCounter1 = loopCounter1 + 1;
        TrcTrace(Translate("loop: "), loopCounter1);
        front_channel = loopCounter1 % 7;
        front_channel = front_channel + 2;
        TrcTrace(Translate("front_channel: "), front_channel);
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      }
    }
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
  } }
