 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
 namespace _Method { #include "Common\\iSWAP-PlateAndLidMovement.hs_" }
 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
#include "Common\\LMSF base deck layout October 2021.res"
global device ML_STAR ("Common\\LMSF base deck layout October 2021.lay", "ML_STAR", hslTrue);
variable loopCounter1;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    PLATEANDLIDMOVEMENT::_InitLibrary();
    ISWAP_PLATEANDLIDMOVEMENT::_InitLibrary();
    COMMON96HEADSUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    {
      for(loopCounter1 = 0; loopCounter1 < 10;)
      {
        loopCounter1 = loopCounter1 + 1;
        PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.GP_Lid_1, ML_STAR.GP_Lid_2, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
        PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.GP_Lid_2, ML_STAR.GP_Lid_3, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
        PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.GP_Lid_3, ML_STAR.GP_Lid_4, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
        PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.GP_Lid_4, ML_STAR.GP_Lid_5, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
        PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.GP_Lid_5, ML_STAR.GP_Lid_1, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
      }
    }
    COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR);
    PLATEANDLIDMOVEMENT::_ExitLibrary();
    ISWAP_PLATEANDLIDMOVEMENT::_ExitLibrary();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
  } }
