 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
#include "Plate and lid movement test example.res"
variable mix_volume;
variable volume_left;
variable loopCounter1;
variable isPipetting;
variable tip_counter_1000_channels;
variable tip_counter_300_channels;
global device ML_STAR ("Plate and lid movement test example.lay", "ML_STAR", hslTrue);
dialog customDialog_1;
variable User_choice;
dialog dialogHandle1;
dialog dialogHandle_2;
dialog dialogHandle_3;
dialog dialogHandle_4;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    User_choice = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
    dialogHandle1.SetOutput(Translate("Pause"));
    dialogHandle1.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
    dialogHandle_2.SetOutput(Translate("Pause"));
    dialogHandle_2.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    ML_STAR.Starting_Growth_Plate.SetCurrentPosition(1);
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
    dialogHandle_3.SetOutput(Translate("Pause"));
    dialogHandle_3.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
    dialogHandle_4.SetOutput(Translate("Pause"));
    dialogHandle_4.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
    COMMON96HEADSUBMETHODS::_ExitLibrary();
  } }
