 namespace _Method { #include "Common\\iSWAP-PlateAndLidMovement.hs_" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_Device_Controllers.hs_" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_TruSeqNano_Prep.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_TruSeqNano_Processes.hs_" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
#include "Test - Midi plates and HHS.res"
dialog dialogHandle1;
dialog dialogHandle_1;
dialog dialogHandle_2;
variable HHS3;
global device ML_STAR ("Test - Midi plates and HHS.lay", "ML_STAR", hslTrue);
global device HxFan ("Test - Midi plates and HHS.lay", "HxFan", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ISWAP_PLATEANDLIDMOVEMENT::_InitLibrary();
    NIST_DEVICE_CONTROLLERS::_InitLibrary();
    NIST_TRUSEQNANO_PREP::_InitLibrary();
    NIST_TRUSEQNANO_PROCESSES::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    Initialize_HHS(HHS3, 3);
    NIST_TRUSEQNANO_PREP::SetHHSTemperature(HHS3, 20);
    dialogHandle_1.SetOutput(Translate("pause"));
    dialogHandle_1.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_stack, ML_STAR.Midi_on_magnet, 0, 1, ML_STAR);
    dialogHandle1.SetOutput(Translate("pause"));
    dialogHandle1.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_magnet, ML_STAR.Midi_on_HHS, 0, 1, ML_STAR);
    HSLHamHeaterShaker::SetPlateLock(HHS3, 1);
    NIST_TRUSEQNANO_PREP::Shake(HHS3, 1800, 20);
    dialogHandle_2.SetOutput(Translate("pause"));
    dialogHandle_2.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    HSLHamHeaterShaker::SetPlateLock(HHS3, 0);
    ISWAP_PLATEANDLIDMOVEMENT::MoveMidiPlate(ML_STAR.Midi_on_HHS, ML_STAR.Midi_on_stack, 1, 1, ML_STAR);
    ISWAP_PLATEANDLIDMOVEMENT::_ExitLibrary();
    NIST_DEVICE_CONTROLLERS::_ExitLibrary();
    NIST_TRUSEQNANO_PREP::_ExitLibrary();
    NIST_TRUSEQNANO_PROCESSES::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
  } }
