 namespace _Method { #include "Common\\iSWAP-PlateAndLidMovement.hs_" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_Device_Controllers.hs_" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_TruSeqNano_Prep.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_TruSeqNano_Processes.hs_" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
#include "Test - Midi plates and HHS.res"
dialog dialogHandle1;
variable var_Global_HHSNode;
variable SetTempHHS;
variable HHS_num;
global device ML_STAR ("Test - Midi plates and HHS.lay", "ML_STAR", hslTrue);
global device HxFan ("Test - Midi plates and HHS.lay", "HxFan", hslTrue);
dialog dialogHandle2;
variable HHS3;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ISWAP_PLATEANDLIDMOVEMENT::_InitLibrary();
    NIST_DEVICE_CONTROLLERS::_InitLibrary();
    NIST_TRUSEQNANO_PREP::_InitLibrary();
    NIST_TRUSEQNANO_PROCESSES::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    dialogHandle1.SetInputSize(1);
    dialogHandle1.SetInputField(0, Translate("HHS number?"), hslInteger, 5, 1, 5);
    dialogHandle1.ShowInput(Translate("Which HHS?"), hslInfinite, hslOKOnly | hslDefButton1);
    var_Global_HHSNode = dialogHandle1.GetInputField(0);
    SetTempHHS = 20;
    Initialize_HHS(HHS_num, var_Global_HHSNode);
    NIST_TRUSEQNANO_PREP::SetHHSTemperature(HHS_num, SetTempHHS);
    HSLHamHeaterShaker::SetPlateLock(HHS_num, 1);
    HSLHamHeaterShaker::StartShaker(HHS_num, 1800);
    dialogHandle2.SetOutput(Translate("pause"));
    dialogHandle2.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    HSLHamHeaterShaker::StopShaker(HHS_num);
    HSLHamHeaterShaker::SetPlateLock(HHS_num, 0);
    ISWAP_PLATEANDLIDMOVEMENT::_ExitLibrary();
    NIST_DEVICE_CONTROLLERS::_ExitLibrary();
    NIST_TRUSEQNANO_PREP::_ExitLibrary();
    NIST_TRUSEQNANO_PROCESSES::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
  } }
