#include "NewTest.res"
global device ML_STAR ("NewTest.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "Hamilton HeaterCooler STAR\\HamiltonHeaterCoolerStar.hsl" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "Hamilton HeaterCooler\\HamiltonHeaterCooler.hsl" }
variable HHC_1;
variable HHS_1;
dialog dialogHandle_1;
variable HHS_1_temp;
timer timer1;
variable array_size;
dialog dialogHandle_2;
dialog dialogHandle_3;
variable loopCounter1;
variable HHC_SN_arr[];
variable hhc_ret;
dialog dialogHandle1;
variable set_temp;
variable min_temp;
variable max_temp;
dialog dialogHandle2;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    hhc_ret = HamiltonHeaterCooler::Connect(Translate("COM8"), 30, HHC_1, HHC_SN_arr);
    if (hhc_ret != 0)
    {
      MECC::TraceComment(Translate("Already connected to HHCs"));
      HHC_1 = 100;
      HamiltonHeaterCooler::Disconnect(HHC_1);
      hhc_ret = HamiltonHeaterCooler::Connect(Translate("COM8"), 30, HHC_1, HHC_SN_arr);
    }
    array_size=HHC_SN_arr.GetSize();
    dialogHandle_3.SetOutput(HHC_1, "\n", array_size, "\n", HHC_SN_arr.ElementAt( 1 -1), "\n", HHC_SN_arr.ElementAt( 2 -1), "\n");
    dialogHandle_3.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    {
      for(loopCounter1 = 0; loopCounter1 < array_size;)
      {
        loopCounter1 = loopCounter1 + 1;
        dialogHandle2.SetOutput(Translate("HHC SN: "), HHC_SN_arr.ElementAt( loopCounter1 -1));
        dialogHandle2.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        HamiltonHeaterCooler::Identify(HHC_SN_arr.ElementAt( loopCounter1 -1));
        if (loopCounter1 == 2)
        {
          set_temp = 37.0;
          min_temp = set_temp - 3;
          max_temp = set_temp + 3;
          hhc_ret = HamiltonHeaterCooler::SetTemperature(HHC_SN_arr.ElementAt( loopCounter1 -1), min_temp, max_temp, set_temp, HamiltonHeaterCooler::_FALSE, 30);
        }
        else
        {
          if(0){
            HamiltonHeaterCooler::StopTemperatureControl(HHC_SN_arr.ElementAt( loopCounter1 -1));
          }
        }
        if(0){
          dialogHandle1.SetOutput(hhc_ret);
          dialogHandle1.ShowOutput(Translate("hhc return value"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          HamiltonHeaterCooler::Identify(HHC_SN_arr.ElementAt( loopCounter1 -1));
          dialogHandle_2.SetOutput(HHS_1_temp);
          dialogHandle_2.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        }
      }
    }
    {
      for(loopCounter1 = 0; loopCounter1 < array_size;)
      {
        loopCounter1 = loopCounter1 + 1;
        HamiltonHeaterCooler::GetTemperature(HHC_SN_arr.ElementAt( loopCounter1 -1), HHS_1_temp);
      }
    }
    if(0){
      HamiltonHeaterCooler::Disconnect(HHC_1);
    }
    if(0){
      HSLHamHeaterShaker::CreateStarDevice(ML_STAR, 1, HHS_1);
      HSLHamHeaterShaker::SetPlateLock(HHS_1, 0);
      if( 0 == timer1.SetTimer(2) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == timer1.WaitTimer(hslTrue, hslFalse) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      HSLHamHeaterShaker::SetPlateLock(HHS_1, 1);
      HSLHamHeaterShaker::StartShaker(HHS_1, 500);
      if( 0 == timer1.SetTimer(5) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == timer1.WaitTimer(hslTrue, hslFalse) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      HSLHamHeaterShaker::StopShaker(HHS_1);
      HSLHamHeaterShaker::StartShakerTimed(HHS_1, 500, 5);
      HSLHamHeaterShaker::SetPlateLock(HHS_1, 0);
      HSLHamHeaterShaker::GetTemperature(HHS_1, HHS_1_temp);
      dialogHandle_1.SetOutput(HHS_1_temp);
      dialogHandle_1.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      HSLHamHeaterShaker::Terminate();
    }
  } }
