#include "Test minimum pipetting volume from reagent trough.res"
global device ML_STAR ("Test minimum pipetting volume from reagent trough.lay", "ML_STAR", hslTrue);
global device HxFan ("Test minimum pipetting volume from reagent trough.lay", "HxFan", hslTrue);
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
variable loopCounter1;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    SeqEdit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR, Translate("tips"), Translate("edit tips"), 60, Translate(""), 0, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 1, Translate(""));
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
    {
      for(loopCounter1 = 0; loopCounter1 < 50;)
      {
        loopCounter1 = loopCounter1 + 1;
        TrcTrace(Translate("loop counter: "), loopCounter1);
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      }
    }
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  } }
