#include "culture processing\\06 Resuspend cells in Growth Plate.res"
global device ML_STAR ("culture processing\\06 Resuspend cells in Growth Plate.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "..\\HSLTrcLib.hsl" }
 namespace _Method { #include "HSLInhecoTEC\\HSLInhecoTECLib.hsl" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
variable _intThermoshakeControlID;
variable _intThermoshakeDeviceID;
variable strThermoshakeErrorCode;
variable blnThermoshakeSuccess;
variable _blnSimulationMode;
variable fltThermoshakeTemperature;
variable loopCounter2;
timer hdlThermoshakeTimer;
timer timer1;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    _blnSimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    TrcTrace(Translate("_blnSimulationMode = "), _blnSimulationMode);
    _intThermoshakeControlID = 0;
    TrcTrace(Translate("_intThermoshakeControlID = "), _intThermoshakeControlID);
    _intThermoshakeDeviceID = 1;
    TrcTrace(Translate("_intThermoshakeDeviceID = "), _intThermoshakeDeviceID);
    blnThermoshakeSuccess = HSLInhecoTECLib::Initialize(_intThermoshakeControlID, _blnSimulationMode, strThermoshakeErrorCode);
    _ThermoshakeReturnHandle(blnThermoshakeSuccess, Translate("initialise"));
    blnThermoshakeSuccess = HSLInhecoTECLib::SetTargetTemperature(_intThermoshakeControlID, _intThermoshakeDeviceID, 4.0, strThermoshakeErrorCode);
    _ThermoshakeReturnHandle(blnThermoshakeSuccess, Translate("set target temperature"));
    blnThermoshakeSuccess = HSLInhecoTECLib::StartTemperatureControl(_intThermoshakeControlID, _intThermoshakeDeviceID, strThermoshakeErrorCode);
    _ThermoshakeReturnHandle(blnThermoshakeSuccess, Translate("StartTemperatureControl"));
    blnThermoshakeSuccess = HSLInhecoTECLib::SetShakerRevolutions(_intThermoshakeControlID, _intThermoshakeDeviceID, 100, strThermoshakeErrorCode);
    _ThermoshakeReturnHandle(blnThermoshakeSuccess, Translate("SetShakerRevolutions"));
    blnThermoshakeSuccess = HSLInhecoTECLib::SetShakerShape(_intThermoshakeControlID, _intThermoshakeDeviceID, 0, strThermoshakeErrorCode);
    _ThermoshakeReturnHandle(blnThermoshakeSuccess, Translate("SetShakerShape"));
    blnThermoshakeSuccess = HSLInhecoTECLib::StartShaker(_intThermoshakeControlID, _intThermoshakeDeviceID, strThermoshakeErrorCode);
    _ThermoshakeReturnHandle(blnThermoshakeSuccess, Translate("StartShaker"));
    if( 0 == timer1.SetTimer(10) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == timer1.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    blnThermoshakeSuccess = HSLInhecoTECLib::StopShaker(_intThermoshakeControlID, _intThermoshakeDeviceID, strThermoshakeErrorCode);
    _ThermoshakeReturnHandle(blnThermoshakeSuccess, Translate("StopShaker"));
    {
      for(loopCounter2 = 0; loopCounter2 < 10;)
      {
        loopCounter2 = loopCounter2 + 1;
        blnThermoshakeSuccess = HSLInhecoTECLib::GetActualDeviceTemperature(_intThermoshakeControlID, _intThermoshakeDeviceID, 1, fltThermoshakeTemperature, strThermoshakeErrorCode);
        _ThermoshakeReturnHandle(blnThermoshakeSuccess, Translate("get actucal device temperature"));
        if (_blnSimulationMode == 1)
        {
          fltThermoshakeTemperature = 5.0;
        }
        TrcTrace(Translate("fltThermoshakeTemperature = "), fltThermoshakeTemperature);
        if (fltThermoshakeTemperature < 6.0)
        {
          break;
        }
        if( 0 == hdlThermoshakeTimer.SetTimer(30) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == hdlThermoshakeTimer.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (loopCounter2 == 10)
        {
          TrcTrace4(Translate("--------------------------- Thermoshake error - "), Translate("failed to reach temperature, the method will abort"), Translate(" ---------------------------"), Translate(""));
          abort;
        }
      }
    }
    blnThermoshakeSuccess = HSLInhecoTECLib::StopTemperatureControl(_intThermoshakeControlID, _intThermoshakeDeviceID, strThermoshakeErrorCode);
    _ThermoshakeReturnHandle(blnThermoshakeSuccess, Translate("terminate"));
    blnThermoshakeSuccess = HSLInhecoTECLib::Terminate(1);
    _ThermoshakeReturnHandle(blnThermoshakeSuccess, Translate("terminate"));
  } }
