private function _ThermoshakeReturnHandle( variable i_blnSuccess, variable i_strCommandDescription ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  blnThermoshakeSuccess = HSLInhecoTECLib::StopTemperatureControl(_intThermoshakeControlID, _intThermoshakeDeviceID, strThermoshakeErrorCode);
  _ThermoshakeReturnHandle(blnThermoshakeSuccess, Translate("terminate"));
  blnThermoshakeSuccess = HSLInhecoTECLib::Terminate(1);
  _ThermoshakeReturnHandle(blnThermoshakeSuccess, Translate("terminate"));
}

private function _ThermoshakeReturnHandle( variable i_blnSuccess, variable i_strCommandDescription ) void {
  private dialog customDialog_1;
  private variable blnSuccess;
  private variable strLastError;
  if (i_blnSuccess == 0)
  {
    HSLInhecoTECLib::GetLastError(strLastError);
    TrcTrace4(Translate("--------------------------- Thermoshake error - "), i_strCommandDescription, Translate(" ---------------------------"), Translate(""));
    TrcTrace4(Translate("--------------------------- Thermoshake error details - "), strLastError, Translate(" ---------------------------"), Translate(""));
    customDialog_1.InitCustomDialog("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");
    customDialog_1.SetCustomDialogProperty( "textBlock3.Text", i_strCommandDescription );
    customDialog_1.SetCustomDialogProperty( "textBlock6.Text", strLastError );
    customDialog_1.ShowCustomDialog();
    blnSuccess = HSLInhecoTECLib::Terminate(1);
    if (blnSuccess == 0)
    {
      HSLInhecoTECLib::GetLastError(strLastError);
      TrcTrace4(Translate("--------------------------- Thermoshake error - terminate"), Translate(" ---------------------------"), Translate(""), Translate(""));
    }
    abort;
  }
}
