 namespace _Method { #include "Culture processing\\TipHandling.hs_" }
#include "plate move tests 2018 06 20.res"
global device ML_STAR ("plate move tests 2018 06 20.lay", "ML_STAR", hslTrue);
variable loopCounter1;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    TIPHANDLING::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    if(0){
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      {
        	ML_STAR._8A76E9A2_8053_4a32_B36F_AD9556B09C99("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"); // EasyiSWAPTransport
      }
      {
        	ML_STAR._8A76E9A2_8053_4a32_B36F_AD9556B09C99("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"); // EasyiSWAPTransport
      }
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      {
        for(loopCounter1 = 0; loopCounter1 < 12;)
        {
          loopCounter1 = loopCounter1 + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
      }
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      {
        	ML_STAR._8A76E9A2_8053_4a32_B36F_AD9556B09C99("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"); // EasyiSWAPTransport
      }
      {
        	ML_STAR._8A76E9A2_8053_4a32_B36F_AD9556B09C99("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"); // EasyiSWAPTransport
      }
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      {
        	ML_STAR._8A76E9A2_8053_4a32_B36F_AD9556B09C99("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"); // EasyiSWAPTransport
      }
      {
        	ML_STAR._8A76E9A2_8053_4a32_B36F_AD9556B09C99("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"); // EasyiSWAPTransport
      }
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      {
        	ML_STAR._8A76E9A2_8053_4a32_B36F_AD9556B09C99("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"); // EasyiSWAPTransport
      }
      {
        	ML_STAR._8A76E9A2_8053_4a32_B36F_AD9556B09C99("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"); // EasyiSWAPTransport
      }
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
    }
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
    TIPHANDLING::_ExitLibrary();
  } }
