global device ML_STAR ("tip pickup error handling test.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
#include "tip pickup error handling test.res"
 namespace _Method { #include "SmartStepCustomizedErrorHandling\\SmartStepCustomErrorHandling.hs_" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
variable user_choice;
variable loopCounter2;
dialog dialogHandle_1;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    SMARTSTEPCUSTOMERRORHANDLING::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    user_choice = 1;
    MECC::TraceComment(Translate("Smart steps, with default plus walk-away mode"));
    {
      loopCounter2 = 0;
      while (user_choice == 1)
      {
        loopCounter2 = loopCounter2 + 1;
        PTL::ResetTipHandlingState();
        PTL::SetTipHandlingState("UserResponseTime", 0);
        PTL::SetTipHandlingState("ErrorHandling", 3);
        PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
        PTL::SetTipHandlingState("TipCountingIdentifier", "");
        PTL::SetTipHandlingState("InitializeCustomStepID", 0);
        PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
        PTL::SetTipHandlingState("TipPickupChannelVariable", "");
        PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
        if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_1000_Channels) )
        {
              PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
        PTL::ResetTipHandlingState();
        PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
        PTL::SetTipHandlingState("ErrorHandling", 3);
        PTL::SetTipHandlingState("InitializeCustomStepID", 0);
        PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
        PTL::SetTipHandlingState("TipEjectChannelVariable", "");
        if( 0 == PTL::TipEject(ML_STAR) )
        {
              PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
        PTL::ResetTipHandlingState();
        PTL::SetTipHandlingState("UserResponseTime", 0);
        PTL::SetTipHandlingState("ErrorHandling", 3);
        PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
        PTL::SetTipHandlingState("TipCountingIdentifier", "");
        PTL::SetTipHandlingState("InitializeCustomStepID", 0);
        PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
        PTL::SetTipHandlingState("TipPickupChannelVariable", "");
        PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
        if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_300_Channels) )
        {
              PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
        PTL::ResetTipHandlingState();
        PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
        PTL::SetTipHandlingState("ErrorHandling", 3);
        PTL::SetTipHandlingState("InitializeCustomStepID", 0);
        PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
        PTL::SetTipHandlingState("TipEjectChannelVariable", "");
        if( 0 == PTL::TipEject(ML_STAR) )
        {
              PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
    }
    COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR);
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    SMARTSTEPCUSTOMERRORHANDLING::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
  } }
