global device ML_STAR ("tip pickup error handling test.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
#include "tip pickup error handling test.res"
 namespace _Method { #include "SmartStepCustomizedErrorHandling\\SmartStepCustomErrorHandling.hs_" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
variable user_choice;
variable loopCounter2;
dialog dialogHandle_1;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    SMARTSTEPCUSTOMERRORHANDLING::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    user_choice = 1;
    if(0){
      {
        loopCounter2 = 0;
        while (user_choice == 1)
        {
          loopCounter2 = loopCounter2 + 1;
          PTL::ResetTipHandlingState();
          PTL::SetTipHandlingState("UserResponseTime", 0);
          PTL::SetTipHandlingState("ErrorHandling", 3);
          PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
          PTL::SetTipHandlingState("TipCountingIdentifier", "");
          PTL::SetTipHandlingState("InitializeCustomStepID", 0);
          PTL::SetTipHandlingState("TipPickupCustomStepID", 11);
          PTL::SetTipHandlingState("TipPickupChannelVariable", "");
          PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
          PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
          if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_1000_Channels) )
          {
                PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
          PTL::ResetTipHandlingState();
          PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
          PTL::SetTipHandlingState("ErrorHandling", 3);
          PTL::SetTipHandlingState("InitializeCustomStepID", 0);
          PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
          PTL::SetTipHandlingState("TipEjectChannelVariable", "");
          if( 0 == PTL::TipEject(ML_STAR) )
          {
                PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
          }
          dialogHandle_1.SetInputSize(1);
          dialogHandle_1.SetInputField(0, Translate("choice"), hslInteger, 1, 0, 1);
          dialogHandle_1.ShowInput("", hslInfinite, hslOKOnly | hslDefButton1);
          user_choice = dialogHandle_1.GetInputField(0);
        }
      }
    }
    {
      sequence arrseqAspirate_2[];
      sequence arrseqDispense_2[];
      arrseqAspirate_2.SetSize(1);
      arrseqAspirate_2.SetAt(0, ML_STAR.Nalgene_300_ml_open_trough_0002);
      arrseqDispense_2.SetSize(1);
      arrseqDispense_2.SetAt(0, ML_STAR.media1);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", 0);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 15);
      PTL::SetPipettingState("DispenseMode", 1);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_2, arrseqDispense_2, 1, 1, 500, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Nalgene_300_ml_open_trough_0002, ML_STAR.media1) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR);
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    SMARTSTEPCUSTOMERRORHANDLING::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
  } }
