 namespace _Method { #include "Culture processing\\TipHandling.hs_" }
#include "culture processing\\00 Initialise.res"
variable blnSuccess;
global device ML_STAR ("culture processing\\00 Initialise.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    TIPHANDLING::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    blnSuccess = TIPHANDLING::MoveTipRackWithCOREGrip_96HeadTipsOnly(ML_STAR, ML_STAR.COREGripTool_OnWaste_1000ul_0001, ML_STAR.Tips300ulStandardVolumeTipWithFilter_HandOff, ML_STAR.Tips300ulStandardVolumeTipWithFilter_96_1, 1);
    blnSuccess = TIPHANDLING::MoveTipRackWithCOREGrip_96HeadTipsOnly(ML_STAR, ML_STAR.COREGripTool_OnWaste_1000ul_0001, ML_STAR.Tips300ulStandardVolumeTipWithFilter_96_1, ML_STAR.Tips300ulStandardVolumeTipWithFilter_HandOff, 1);
    blnSuccess = TIPHANDLING::MoveTipRackWithCOREGrip_96HeadTipsOnly(ML_STAR, ML_STAR.COREGripTool_OnWaste_1000ul_0001, ML_STAR.Tips300ulStandardVolumeTipWithFilter_HandOff, ML_STAR.Tips300ulStandardVolumeTipWithFilter_96_2, 1);
    blnSuccess = TIPHANDLING::MoveTipRackWithCOREGrip_96HeadTipsOnly(ML_STAR, ML_STAR.COREGripTool_OnWaste_1000ul_0001, ML_STAR.Tips300ulStandardVolumeTipWithFilter_96_2, ML_STAR.Tips300ulStandardVolumeTipWithFilter_HandOff, 1);
    blnSuccess = TIPHANDLING::MoveTipRackWithCOREGrip_96HeadTipsOnly(ML_STAR, ML_STAR.COREGripTool_OnWaste_1000ul_0001, ML_STAR.Tips50ulTipWithFilter_HandOff, ML_STAR.Tips50ulTipWithFilter_96_1, 1);
    blnSuccess = TIPHANDLING::MoveTipRackWithCOREGrip_96HeadTipsOnly(ML_STAR, ML_STAR.COREGripTool_OnWaste_1000ul_0001, ML_STAR.Tips50ulTipWithFilter_96_1, ML_STAR.Tips50ulTipWithFilter_HandOff, 1);
    blnSuccess = TIPHANDLING::MoveTipRackWithCOREGrip_96HeadTipsOnly(ML_STAR, ML_STAR.COREGripTool_OnWaste_1000ul_0001, ML_STAR.Tips50ulTipWithFilter_HandOff, ML_STAR.Tips50ulTipWithFilter_96_2, 1);
    blnSuccess = TIPHANDLING::MoveTipRackWithCOREGrip_96HeadTipsOnly(ML_STAR, ML_STAR.COREGripTool_OnWaste_1000ul_0001, ML_STAR.Tips50ulTipWithFilter_96_2, ML_STAR.Tips50ulTipWithFilter_HandOff, 1);
    TIPHANDLING::_ExitLibrary();
  } }
