global device ML_STAR ("NIST Tutorial 1 Deck.lay", "ML_STAR", hslTrue);
#include "NIST Tutorial 1 Deck.res"
variable loopCounter1;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    {
      sequence arrseqAspirate_1[];
      sequence arrseqDispense_1[];
      arrseqAspirate_1.SetSize(1);
      arrseqAspirate_1.SetAt(0, ML_STAR.Cos_96_DW_1mL_0001);
      arrseqDispense_1.SetSize(1);
      arrseqDispense_1.SetAt(0, ML_STAR.Cos_96_DW_1mL_0002);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 3);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 0);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 5);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslTrue);
      PTL::SetPipettingState("DispenseSequenceReducible", hslTrue);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 1);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_1, arrseqDispense_1, 1, 1, 500, 0, 1, hslInfinite, hslInfinite, 1, "", ML_STAR.Cos_96_DW_1mL_0001, ML_STAR.Cos_96_DW_1mL_0002) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
  } }
