 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Directory.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLTimLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
#include "Overnight growth with glycerol stock prep_Vnatriegens.res"
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable culture_volume;
variable mix_volume;
variable pipette_volume;
variable pipette_multiplier;
variable is_debugging;
variable dilution_factor;
variable keep_old_GP;
global device ML_STAR ("Overnight growth with glycerol stock prep_Vnatriegens.lay", "ML_STAR", hslTrue);
variable prep_glycstock;
variable pipette_volume_cellstoglycstock;
dialog dialogHandle_1;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("***************************************************************************************************************\nThis method stamps cells from previous GP into new GP with 96Head and if applicable makes \n2 technical replicates of glycerol stock from previous GP\n\nTips used:\n     300 uL: 96 (1 rack) on handoff\n\nDuration:\n          6 min with glycerol stock prep\n***************************************************************************************************************"));
    GetParams();
    StartUp();
    TrcTrace(Translate("prepGlycStock = "), prep_glycstock);
    TrcTrace(Translate("isPipetting = "), is_pipetting);
    if (prep_glycstock == "true")
    {
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Glycerol_Plate_1_lid, ML_STAR.Lid_parking_GlycerolPlate_1, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Glycerol_Plate_2_lid, ML_STAR.Lid_parking_GlycerolPlate_2, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    }
    else
    {
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, ML_STAR);
    }
    if (prep_glycstock == "true")
    {
      GlycerolStockPrep();
    }
    else
    {
      MECC::TraceComment(Translate("==============================================================\nPipette cells from old growth plate (on handoff) to new growth plate\n=============================================================="));
      pipette_multiplier = culture_volume / (500 * 1.0);
      pipette_volume = culture_volume / (dilution_factor * 1.0);
      mix_volume = pipette_multiplier * 200;
      if (is_pipetting == "true")
      {
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        COMMON96HEADSUBMETHODS::Eject96HeadTipsAndShake(ML_STAR, 10);
      }
      else
      {
        if (is_debugging == "true")
        {
          dialogHandle_1.SetOutput(Translate("Pipette cells from old growth plate (on handoff) to new growth plate"), "\n");
          dialogHandle_1.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        }
      }
    }
    if (prep_glycstock == "true")
    {
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_GlycerolPlate_1, ML_STAR.Glycerol_Plate_1_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_GlycerolPlate_2, ML_STAR.Glycerol_Plate_2_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Old_Growth_Plate, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    }
    else
    {
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Old_Growth_Plate, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    }
    if (keep_old_GP == "true")
    {
      PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Old_Growth_Plate_park, ML_STAR.Old_Growth_Plate_parking_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    }
    else
    {
      PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLidNoTap(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Growth_Plate_waste, ML_STAR.Growth_Plate_waste_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    }
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Lid_parking_Old_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
  } }
