private function CleanUp(  ) void ;
private function GetParams(  ) void ;
private function GlycerolStockPrep(  ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function CleanUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  if(0){
    array_length=tip_counter_array.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < array_length;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (loopCounter1 == 1)
        {
          TipCount::Write2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
        }
        if (loopCounter1 == 2)
        {
          TipCount::Write2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
        }
        if (loopCounter1 == 3)
        {
          TipCount::Write2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
        }
        if (loopCounter1 == 4)
        {
          TipCount::Write2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
        }
      }
    }
  }
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR);
}

private function StartUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  if(0){
    TIP_HANDLING_WITH_96_HEAD::GetTipCounters(tip_counter_array, 1);
    tip_seq_arr.SetSize(0);
    tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Channels);
    tip_seq_arr.AddAsLast(ML_STAR.Tips_300_Channels);
    tip_seq_arr.AddAsLast(ML_STAR.Tips_50_Channels);
    tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Offset_pickup);
    array_length=tip_counter_array.GetSize();
    {
      for(loopCounter1 = 0; loopCounter1 < array_length;)
      {
        loopCounter1 = loopCounter1 + 1;
        if (loopCounter1 == 1)
        {
          TipCount::Read2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
        }
        if (loopCounter1 == 2)
        {
          TipCount::Read2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
        }
        if (loopCounter1 == 3)
        {
          TipCount::Read2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
        }
        if (loopCounter1 == 4)
        {
          TipCount::Read2(ML_STAR.Tips_1000_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
        }
      }
    }
  }
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
}

private function GetParams(  ) void {
  private variable param_dict;
  private variable loc;
  private variable read_line;
  private file file1;
  private variable split_line[];
  private variable loopCounter2;
  private variable culture_volume_str;
  private variable dilution_factor_str;
  param_dict = "param_dict";
  HSLExtensions::Dictionary::CreateDictionary(param_dict, 2);
  file1.AddField(1, read_line, hslString);
  file1.SetDelimiter(hslAsciiText);
  if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    while (
       (file1.Eof() == 0)
    )
    {
      loopCounter2 = loopCounter2 + 1;
      if( 0 == file1.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      loc = StrFind(read_line, ",");
      if (loc > 0)
      {
        split_line = HSLExtensions::String::Split(read_line, Translate(","), 1);
        HSLExtensions::Dictionary::AddItem(param_dict, split_line.ElementAt( 1 -1), split_line.ElementAt( 2 -1));
      }
    }
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  is_pipetting = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isPipetting"));
  is_debugging = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isDebugging"));
  keep_old_GP = HSLExtensions::Dictionary::GetItem(param_dict, Translate("keepOldGrowthPlate"));
  culture_volume_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("cultureVolume"));
  culture_volume = StrFVal(culture_volume_str);
  if (culture_volume > 500)
  {
    culture_volume = 500;
  }
  else
  {
    if (culture_volume < 200)
    {
      culture_volume = 200;
    }
  }
  dilution_factor_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("dilutionFactor"));
  dilution_factor = StrFVal(dilution_factor_str);
  prep_glycstock = HSLExtensions::Dictionary::GetItem(param_dict, Translate("prepGlycStock"));
}

private function GlycerolStockPrep(  ) void {
  private dialog dialogHandle_1;
  MECC::TraceComment(Translate("==============================================================\nPipette cells from old growth plate (on handoff) to new growth plate\nPipette cells from old growth plate (on handoff) to glycerol stock plate 1\nPipette cells from old growth plate (on handoff) to glycerol stock plate 2\n=============================================================="));
  pipette_multiplier = culture_volume / (500 * 1.0);
  pipette_volume = culture_volume / (dilution_factor * 1.0);
  mix_volume = pipette_multiplier * 100;
  pipette_volume_cellstoglycstock = 150;
  if (is_pipetting == "true")
  {
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR.Old_Growth_Plate.SetCurrentPosition(1);
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR.Old_Growth_Plate.SetCurrentPosition(1);
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR.Old_Growth_Plate.SetCurrentPosition(1);
    COMMON96HEADSUBMETHODS::Eject96HeadTipsAndShake(ML_STAR, 10);
    ML_STAR.Glycerol_Stock_1.SetCurrentPosition(1);
    ML_STAR.Glycerol_Stock_2.SetCurrentPosition(1);
  }
  else
  {
    if (is_debugging == "true")
    {
      dialogHandle_1.SetOutput(Translate("Pipette cells from old growth plate (on handoff) to new growth plate"), "\n");
      dialogHandle_1.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
  }
}
