 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "HSLExtensions\\Directory.hsl" }
 namespace _Method { #include "HSLTimLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
#include "Checkerboard plate prep_Vnatriegens.res"
variable inducer_stock_concentration;
variable additive_left_concentration;
variable additive_right_concentration;
variable additive_left_units;
variable additive_left_id;
variable additive_right_id;
variable inducer_id;
variable inducer_units;
variable additive_right_units;
variable plasmid_1_id;
variable worklist_file_path;
variable strain_1_id;
variable strain_str;
variable ind_conc_str;
variable right_add_conc_str;
variable left_add_conc_str;
variable plasmid_str;
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable culture_volume;
variable pipette_volume;
variable media_used;
variable next_media;
variable is_debugging;
dialog dialogHandle_1;
dialog dialogHandle_2;
global device ML_STAR ("Checkerboard plate prep_Vnatriegens.lay", "ML_STAR", hslTrue);
variable media_1_id;
variable media_str;
variable checkerboard_ids[];
dialog dialogHandle_3;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("***************************************************************************************************************\nThis method puts together a growth plate with 10x dilute V natriegens from stock culture tube(s)\n in a checkerboard pattern.\n\nGrowth plate on handoff\nAbgene plate on position 4 of 5\nCulture in position 24\nTips used:\n     1000 uL: 80 (1 rack)\nDuration: 25 min\n***************************************************************************************************************"));
    GetParams();
    StartUp();
    media_used = 0;
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.ABGene_plate_0002_lid, ML_STAR.Lid_parking_ABGene_plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Media_source_lid, ML_STAR.Lid_parking_Media_trough, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nPipette media into ABGene plate.\nFill column 1 with 900 uL media (surface dispense)\nFill column 2 with 900 uL media (surface dispense)\nCover Abgene plate wtih lid\n=============================================================="));
    if (is_pipetting == "true")
    {
      pipette_volume = 900;
      {
        sequence arrseqAspirate_4[];
        sequence arrseqDispense_4[];
        arrseqAspirate_4.SetSize(1);
        arrseqAspirate_4.SetAt(0, ML_STAR.Media_source);
        arrseqDispense_4.SetSize(1);
        arrseqDispense_4.SetAt(0, ML_STAR.Bacteria_VN_Stock_Plate);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 5);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 11);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseSubmergeDepth", 0);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
        PTL::SetPipettingState("DispenseFluidHeight", 5);
        PTL::SetPipettingState("DispenseMode", 3);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslFalse);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_4, arrseqDispense_4, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, ML_STAR.Bacteria_VN_Stock_Plate) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
      next_media = pipette_volume * 16;
      media_used = media_used + next_media;
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_ABGene_plate, ML_STAR.ABGene_plate_0002_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_3.SetOutput(Translate("media into growth plate"), "\n");
        dialogHandle_3.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    MECC::TraceComment(Translate("==============================================================\nRemove lid from growth plate\nPipette media into growth plate\nFill media (blank) wells with 500 uL media (surface dispense)\nFill bacteria wells with 450 uL media (surface dispense)\nCover growth plate with lid\n=============================================================="));
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    if (is_pipetting == "true")
    {
      pipette_volume = culture_volume * 1;
      {
        sequence arrseqAspirate_5[];
        sequence arrseqDispense_5[];
        arrseqAspirate_5.SetSize(1);
        arrseqAspirate_5.SetAt(0, ML_STAR.Media_source);
        arrseqDispense_5.SetSize(1);
        arrseqDispense_5.SetAt(0, ML_STAR.Media_dispense_blank);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 5);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 11);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "11110000");
        PTL::SetPipettingState("InitializeEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupChannelVariable", "11110000");
        PTL::SetPipettingState("TipPickupEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "11110000");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "11110000");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseSubmergeDepth", 0);
        PTL::SetPipettingState("DispenseChannelVariable", "11110000");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
        PTL::SetPipettingState("DispenseFluidHeight", 5);
        PTL::SetPipettingState("DispenseMode", 3);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslFalse);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_5, arrseqDispense_5, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, ML_STAR.Media_dispense_blank) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
      next_media = pipette_volume * 48;
      media_used = media_used + next_media;
      pipette_volume = culture_volume * 0.9;
      {
        sequence arrseqAspirate_6[];
        sequence arrseqDispense_6[];
        arrseqAspirate_6.SetSize(1);
        arrseqAspirate_6.SetAt(0, ML_STAR.Media_source);
        arrseqDispense_6.SetSize(1);
        arrseqDispense_6.SetAt(0, ML_STAR.Media_dispense_bacteria);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 5);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 11);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "11110000");
        PTL::SetPipettingState("InitializeEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupChannelVariable", "11110000");
        PTL::SetPipettingState("TipPickupEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "11110000");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "11110000");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseSubmergeDepth", 0);
        PTL::SetPipettingState("DispenseChannelVariable", "11110000");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
        PTL::SetPipettingState("DispenseFluidHeight", 5);
        PTL::SetPipettingState("DispenseMode", 3);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslFalse);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_6, arrseqDispense_6, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, ML_STAR.Media_dispense_bacteria) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
      next_media = pipette_volume * 48;
      media_used = media_used + next_media;
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_1.SetOutput(Translate("media into growth plate"), "\n");
        dialogHandle_1.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Media_trough, ML_STAR.Media_source_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.ABGene_plate_0002_lid, ML_STAR.Lid_parking_ABGene_plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("=====================================================================\nPipette from tube 1 of stock (position 24) to column 1 of ABGene plate (10X)\nPipette from column 1 of ABGene plate to column 2 of ABgene plate (100X)\nRemove lid from growth plate\nPipette from columnn 2 of ABGene plate to checkerboard pattern on GP (1000X)\nInclude mixing step on aspiration\n====================================================================="));
    if (is_pipetting == "true")
    {
      pipette_volume = 100;
      {
        sequence arrseqAspirate_7[];
        sequence arrseqDispense_7[];
        arrseqAspirate_7.SetSize(1);
        arrseqAspirate_7.SetAt(0, ML_STAR.Bacteria_Stock_Tubes);
        arrseqDispense_7.SetSize(1);
        arrseqDispense_7.SetAt(0, ML_STAR.Bacteria_VN_10x);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 5);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 11);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "11000000");
        PTL::SetPipettingState("InitializeEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupChannelVariable", "11000000");
        PTL::SetPipettingState("TipPickupEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "11000000");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "11000000");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
        PTL::SetPipettingState("AspiratePrerinsingMixPosition", 8);
        PTL::SetPipettingState("AspiratePrerinsingMixVolume", 800);
        PTL::SetPipettingState("DispenseSubmergeDepth", 0);
        PTL::SetPipettingState("DispenseChannelVariable", "11000000");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
        PTL::SetPipettingState("DispenseFluidHeight", 5);
        PTL::SetPipettingState("DispenseMode", 3);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_7, arrseqDispense_7, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Bacteria_Stock_Tubes, ML_STAR.Bacteria_VN_10x) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
      {
        sequence arrseqAspirate_8[];
        sequence arrseqDispense_8[];
        arrseqAspirate_8.SetSize(1);
        arrseqAspirate_8.SetAt(0, ML_STAR.Bacteria_VN_10x);
        arrseqDispense_8.SetSize(1);
        arrseqDispense_8.SetAt(0, ML_STAR.Bacteria_VN_100x);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 5);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 11);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
        PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3);
        PTL::SetPipettingState("AspiratePrerinsingMixVolume", 800);
        PTL::SetPipettingState("DispenseSubmergeDepth", 0);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
        PTL::SetPipettingState("DispenseFluidHeight", 5);
        PTL::SetPipettingState("DispenseMode", 3);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_8, arrseqDispense_8, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Bacteria_VN_10x, ML_STAR.Bacteria_VN_100x) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
      PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
      pipette_volume = culture_volume * 0.1;
      {
        sequence arrseqAspirate_9[];
        sequence arrseqDispense_9[];
        arrseqAspirate_9.SetSize(1);
        arrseqAspirate_9.SetAt(0, ML_STAR.Bacteria_VN_100x);
        arrseqDispense_9.SetSize(1);
        arrseqDispense_9.SetAt(0, ML_STAR.Bacteria_dispense_checkerboard);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 5);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 11);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
        PTL::SetPipettingState("AspiratePrerinsingMixPosition", 2);
        PTL::SetPipettingState("AspiratePrerinsingMixVolume", 800);
        PTL::SetPipettingState("DispenseSubmergeDepth", 0);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
        PTL::SetPipettingState("DispenseFluidHeight", 5);
        PTL::SetPipettingState("DispenseMode", 3);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_9, arrseqDispense_9, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Bacteria_VN_100x, ML_STAR.Bacteria_dispense_checkerboard) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_2.SetOutput(Translate("cells into growth plate"), "\n");
        dialogHandle_2.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_ABGene_plate, ML_STAR.ABGene_plate_0002_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Lid_parking_Old_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    TrcTrace(Translate("Media used:"), media_used);
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    CalculateOutputs();
    SaveWorklistAndMetadata();
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
  } }
