private function CalculateOutputs(  ) void ;
private function CleanUp(  ) void ;
private function GetParams(  ) void ;
private function SaveWorklistAndMetadata(  ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function CleanUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        TipCount::Write2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        TipCount::Write2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        TipCount::Write2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 4)
      {
        TipCount::Write2(ML_STAR.Tips_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  COMMON96HEADSUBMETHODS::Clear96HeadAndArm(ML_STAR);
}

private function StartUp(  ) void {
  private variable array_length;
  private variable loopCounter1;
  MECC::TraceComment(Translate("***************************************************************************************************************\nThis submethod initializes STAR and counts tips (100 uL, 300 uL, 50 uL) on deck\n***************************************************************************************************************"));
  TIP_HANDLING_WITH_96_HEAD::GetTipCounters(tip_counter_array, 1);
  tip_seq_arr.SetSize(0);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_1000_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_300_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_50_Channels);
  tip_seq_arr.AddAsLast(ML_STAR.Tips_Offset_pickup);
  array_length=tip_counter_array.GetSize();
  {
    for(loopCounter1 = 0; loopCounter1 < array_length;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_1000_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 2)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_300_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 3)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_50_Channels, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
      if (loopCounter1 == 4)
      {
        if(0){
          TipCount::Edit2(ML_STAR.Tips_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR, 100);
        }
        TipCount::Read2(ML_STAR.Tips_Offset_pickup, tip_counter_array.ElementAt( loopCounter1 -1), ML_STAR);
      }
    }
  }
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
}

private function CalculateOutputs(  ) void {
  private variable strain;
  private variable plasmid;
  private variable loopCounter1;
  MECC::TraceComment(Translate("-------------------------------------------------\nCalculate outputs submethod\n-------------------------------------------------"));
  if(0){
    ind_conc_str = "inducer_conc";
    left_add_conc_str = "left_add_conc";
    right_add_conc_str = "right_add_conc";
    SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, ind_conc_str, 0);
    SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, left_add_conc_str, 0);
    SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, right_add_conc_str, 0);
  }
  strain_str = "strain";
  plasmid_str = "plasmid";
  if(0){
    media_str = "media";
  }
  strain = Translate("none");
  plasmid = Translate("none");
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, strain_str, strain);
  SeqSetPropertyRange(ML_STAR.Growth_Plate, 1, 96, plasmid_str, plasmid);
  strain = strain_1_id;
  plasmid = plasmid_1_id;
  SeqSetPropertyRange(ML_STAR.Growth_Plate_Bacteria, 1, 48, strain_str, strain);
  SeqSetPropertyRange(ML_STAR.Growth_Plate_Bacteria, 1, 48, plasmid_str, plasmid);
  MECC::TraceComment(Translate("Check 1"));
  checkerboard_ids.SetSize(0);
  checkerboard_ids.AddAsLast(strain_str);
  checkerboard_ids.AddAsLast(plasmid_str);
  MECC::TraceComment(Translate("Check 2"));
  LMSF_UTILITIES::TraceSeqProperties(ML_STAR.Growth_Plate, checkerboard_ids);
  LMSF_UTILITIES::SeqCopyPropsFromShortSeq(ML_STAR.Growth_Plate_Bacteria, checkerboard_ids, ML_STAR.Growth_Plate);
  if(0){
    {
      loopCounter1 = 0;
      while (
         (ML_STAR.Growth_Plate_Bacteria.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Growth_Plate_Bacteria, 1);
        loopCounter1 = loopCounter1 + 1;
        SeqIncrement(ML_STAR.Growth_Plate_Bacteria, 1);
        if (
           (ML_STAR.Growth_Plate_Bacteria.GetCurrentPosition() > 0 && ML_STAR.Growth_Plate_Bacteria.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Growth_Plate_Bacteria.SetMax(ML_STAR.Growth_Plate_Bacteria.GetTotal());
      ML_STAR.Growth_Plate_Bacteria.SetCurrentPosition(1);
    }
  }
  MECC::TraceComment(Translate("Check 3"));
  LMSF_UTILITIES::TraceSeqProperties(ML_STAR.Growth_Plate, checkerboard_ids);
}

private function SaveWorklistAndMetadata(  ) void {
  private variable right_conc;
  private variable inducer_conc;
  private variable row_id;
  private variable left_conc;
  private variable well_id;
  private variable plasmid;
  private variable strain;
  private variable position;
  private variable column_id;
  private variable column_id_str;
  private file file1;
  private variable iniFilePath;
  private variable iniDir;
  private variable iniExists;
  private variable loopCounter2;
  file1.AddField("position", position, hslInteger);
  file1.AddField("well", well_id, hslString, 255);
  file1.AddField("row", row_id, hslString, 255);
  file1.AddField("column", column_id, hslInteger);
  file1.AddField("strain", strain, hslString, 255);
  file1.AddField("plasmid", plasmid, hslString, 255);
  file1.SetDelimiter(hslCSVDelimited);
  if( 0 == file1.Open(worklist_file_path, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, worklist_file_path, "HxMetEdCompCmd");
  }
  if(0){
    file1.AddField("position", position, hslInteger);
    file1.AddField("well", well_id, hslString, 255);
    file1.AddField("row", row_id, hslString, 255);
    file1.AddField("column", column_id, hslInteger);
    file1.AddField("inducerId", inducer_id, hslString, 255);
    file1.AddField("inducerConcentration", inducer_conc, hslFloat);
    file1.AddField("inducerUnits", inducer_units, hslString, 255);
    file1.AddField("leftAdditiveId", additive_left_id, hslString, 255);
    file1.AddField("leftAdditiveConc", left_conc, hslString, 255);
    file1.AddField("leftAdditiveUnits", additive_left_units, hslString, 255);
    file1.AddField("rightAdditiveId", additive_right_id, hslString, 255);
    file1.AddField("rightAdditiveConc", right_conc, hslString, 255);
    file1.AddField("rightAdditiveUnits", additive_right_units, hslString, 255);
    file1.AddField(strain_str, strain, hslString, 255);
    file1.AddField(plasmid_str, plasmid, hslString, 255);
    file1.SetDelimiter(hslCSVDelimited);
    if( 0 == file1.Open(worklist_file_path, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, worklist_file_path, "HxMetEdCompCmd");
    }
  }
  LMSF_UTILITIES::TraceSeqProperties(ML_STAR.Growth_Plate, checkerboard_ids);
  {
    loopCounter2 = 0;
    while (
       (ML_STAR.Growth_Plate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.Growth_Plate, 1);
      loopCounter2 = loopCounter2 + 1;
      position = ML_STAR.Growth_Plate.GetCurrentPosition();
      well_id = SeqGetPositionId(ML_STAR.Growth_Plate);
      row_id = StrLeft(well_id, 1);
      column_id_str = StrMid(well_id, 1, 2);
      column_id = StrIVal(column_id_str);
      if(0){
        left_conc = SeqGetProperty(ML_STAR.Growth_Plate, position, left_add_conc_str);
        right_conc = SeqGetProperty(ML_STAR.Growth_Plate, position, right_add_conc_str);
      }
      strain = SeqGetProperty(ML_STAR.Growth_Plate, position, strain_str);
      plasmid = SeqGetProperty(ML_STAR.Growth_Plate, position, plasmid_str);
      if( 0 == file1.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      SeqIncrement(ML_STAR.Growth_Plate, 1);
      if (
         (ML_STAR.Growth_Plate.GetCurrentPosition() > 0 && ML_STAR.Growth_Plate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.Growth_Plate.SetMax(ML_STAR.Growth_Plate.GetTotal());
    ML_STAR.Growth_Plate.SetCurrentPosition(1);
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  iniDir = HSLExtensions::File::GetDirectoryName(worklist_file_path);
  iniFilePath = iniDir + "\\schema.ini";
  iniExists = HSLExtensions::File::Exists(iniFilePath);
  if (iniExists == 1)
  {
    HSLExtensions::File::Delete(iniFilePath);
  }
}

private function GetParams(  ) void {
  private variable param_dict;
  private variable loc;
  private variable read_line;
  private file file1;
  private variable split_line[];
  private variable inducer_conc_str;
  private variable loopCounter2;
  private variable culture_volume_str;
  MECC::TraceComment(Translate("***************************************************************************************************************\nGet parameters\n***************************************************************************************************************"));
  param_dict = "param_dict";
  HSLExtensions::Dictionary::CreateDictionary(param_dict, 2);
  file1.AddField(1, read_line, hslString);
  file1.SetDelimiter(hslAsciiText);
  if( 0 == file1.Open("C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\LMSF_FrontEnd\\parameters.csv", "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    while (
       (file1.Eof() == 0)
    )
    {
      loopCounter2 = loopCounter2 + 1;
      if( 0 == file1.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      loc = StrFind(read_line, ",");
      if (loc > 0)
      {
        split_line = HSLExtensions::String::Split(read_line, Translate(","), 1);
        HSLExtensions::Dictionary::AddItem(param_dict, split_line.ElementAt( 1 -1), split_line.ElementAt( 2 -1));
      }
    }
  }
  if( 0 != file1.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  file1.RemoveFields();
  worklist_file_path = HSLExtensions::Dictionary::GetItem(param_dict, Translate("worklistFile"));
  strain_1_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("strain1"));
  plasmid_1_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("plasmid1"));
  media_1_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("media"));
  if(0){
    inducer_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducer"));
    inducer_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducerStockConc"));
    inducer_stock_concentration = StrFVal(inducer_conc_str);
    inducer_units = HSLExtensions::Dictionary::GetItem(param_dict, Translate("inducerStockUnits"));
  }
  if(0){
    additive_left_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("leftAdditive"));
    left_add_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("leftAdditiveStockConc"));
    additive_left_concentration = StrFVal(left_add_conc_str);
    additive_left_units = HSLExtensions::Dictionary::GetItem(param_dict, Translate("leftAdditiveStockUnits"));
  }
  if(0){
    additive_right_id = HSLExtensions::Dictionary::GetItem(param_dict, Translate("rightAdditive"));
    right_add_conc_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("rightAdditiveStockConc"));
    additive_right_concentration = StrFVal(right_add_conc_str);
    additive_right_units = HSLExtensions::Dictionary::GetItem(param_dict, Translate("rightAdditiveStockUnits"));
  }
  is_pipetting = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isPipetting"));
  is_debugging = HSLExtensions::Dictionary::GetItem(param_dict, Translate("isDebugging"));
  culture_volume_str = HSLExtensions::Dictionary::GetItem(param_dict, Translate("cultureVolume"));
  culture_volume = StrFVal(culture_volume_str);
  if (culture_volume > 500)
  {
    culture_volume = 500;
  }
  else
  {
    if (culture_volume < 200)
    {
      culture_volume = 200;
    }
  }
}
