 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Directory.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLTimLib.hsl" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "Common\\Tip Handling\\With 96-Head\\Tip Handling with 96-Head.hs_" }
 namespace _Method { #include "Common\\PlateAndLidMovement.hs_" }
#include "Checkerboard plate prep_Vnatriegens.res"
variable inducer_stock_concentration;
variable additive_left_concentration;
variable additive_right_concentration;
variable additive_left_units;
variable additive_left_id;
variable additive_right_id;
variable inducer_id;
variable inducer_units;
variable additive_right_units;
variable plasmid_1_id;
variable worklist_file_path;
variable strain_1_id;
variable strain_str;
variable ind_conc_str;
variable right_add_conc_str;
variable left_add_conc_str;
variable plasmid_str;
sequence tip_seq_arr[];
variable tip_counter_array[];
variable is_pipetting;
variable culture_volume;
variable pipette_volume;
variable media_used;
variable next_media;
variable is_debugging;
dialog dialogHandle_1;
variable dilution_factor;
variable cell_volume;
variable media_volume;
global device ML_STAR ("Checkerboard plate prep_Vnatriegens.lay", "ML_STAR", hslTrue);
sequence media_source_arr[];
sequence media_source_lid_arr[];
variable sequence_number;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_InitLibrary();
    PLATEANDLIDMOVEMENT::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    GetParams();
    StartUp();
    media_used = 0;
    media_source_arr.SetSize(0);
    media_source_lid_arr.SetSize(0);
    media_source_arr.AddAsLast(ML_STAR.Media_source);
    media_source_arr.AddAsLast(ML_STAR.Media_source_2);
    media_source_lid_arr.AddAsLast(ML_STAR.Media_source_lid);
    media_source_lid_arr.AddAsLast(ML_STAR.Media_source_2_lid);
    cell_volume = culture_volume / (dilution_factor * 1.0);
    media_volume = culture_volume - cell_volume;
    TrcTrace(Translate("dilution_factor: "), dilution_factor);
    TrcTrace(Translate("cell_volume: "), cell_volume);
    TrcTrace(Translate("media_volume: "), media_volume);
    PLATEANDLIDMOVEMENT::MoveGrowthPlateWithLid(ML_STAR.Move_Growth_Plate_Handoff, ML_STAR.Growth_Plate_Handoff_lid, ML_STAR.Move_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Growth_Plate_lid, ML_STAR.Lid_parking_Growth_Plate, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(media_source_lid_arr.ElementAt( sequence_number -1), ML_STAR.Lid_parking_Media_trough, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("==============================================================\nPipette media into growth plate (surface dispense)\n=============================================================="));
    if (is_pipetting == "true")
    {
      pipette_volume = media_volume;
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", 0);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("TipCountingEnabled", hslFalse);
      PTL::SetTipHandlingState("TipCountingIdentifier", "");
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupCustomStepID", 0);
      PTL::SetTipHandlingState("TipPickupChannelVariable", "");
      PTL::SetTipHandlingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetTipHandlingState("TipPickupSequenceReducible", hslTrue);
      if( 0 == PTL::TipPickup(ML_STAR, ML_STAR.Tips_1000_Channels) )
      {
            PTL::RaiseRuntimeError(-1472986880, PTL::IDS::smartStepTipPickup, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
      {
        sequence arrseqAspirate_2[];
        sequence arrseqDispense_2[];
        Util2::SeqArrCheckIndex(media_source_arr, sequence_number, "media_source_arr");
        Util2::SeqArrCheckIndex(media_source_arr, sequence_number, "media_source_arr");
        arrseqAspirate_2.SetSize(1);
        arrseqAspirate_2.SetAt(0, media_source_arr.ElementAt(sequence_number-1));
        arrseqDispense_2.SetSize(1);
        arrseqDispense_2.SetAt(0, ML_STAR.Media_dispense);
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 5);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeCustomStepID", 0);
        PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
        PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
        PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
        PTL::SetPipettingState("TipPickupCustomStepID", 11);
        PTL::SetPipettingState("TipEjectCustomStepID", 0);
        PTL::SetPipettingState("AspirateCustomStepID", 0);
        PTL::SetPipettingState("DispenseCustomStepID", 0);
        PTL::SetPipettingState("PreDispenseCustomStepID", 0);
        PTL::SetPipettingState("PostDispenseCustomStepID", 0);
        PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslFalse);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslFalse);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseSubmergeDepth", 0);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
        PTL::SetPipettingState("DispenseFluidHeight", 5);
        PTL::SetPipettingState("DispenseMode", 3);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslFalse);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.Tips_1000_Channels, arrseqAspirate_2, arrseqDispense_2, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", media_source_arr.ElementAt(sequence_number-1), ML_STAR.Media_dispense) )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
      PTL::ResetTipHandlingState();
      PTL::SetTipHandlingState("UserResponseTime", hslInfinite);
      PTL::SetTipHandlingState("ErrorHandling", 3);
      PTL::SetTipHandlingState("InitializeCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectCustomStepID", 0);
      PTL::SetTipHandlingState("TipEjectChannelVariable", "");
      if( 0 == PTL::TipEject(ML_STAR) )
      {
            PTL::RaiseRuntimeError(-1456209664, PTL::IDS::smartStepTipEject, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
      next_media = pipette_volume * 96;
      media_used = media_used + next_media;
    }
    else
    {
      if (is_debugging == "true")
      {
        dialogHandle_1.SetOutput(Translate("media into growth plate"), "\n");
        dialogHandle_1.ShowOutput(Translate("Pipetting"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Growth_Plate, ML_STAR.Growth_Plate_lid, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, ML_STAR);
    PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_Media_trough, media_source_lid_arr.ElementAt( sequence_number -1), ML_STAR.COREGripTool_OnWaste_1000ul_0001, 0, 1, ML_STAR);
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    TrcTrace(Translate("Media used:"), media_used);
    MECC::TraceComment(Translate("-----------------------------------------------------------------------------------------------------------"));
    if(0){
      CalculateOutputs();
      SaveWorklistAndMetadata();
    }
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
    TIP_HANDLING_WITH_96_HEAD::_ExitLibrary();
    PLATEANDLIDMOVEMENT::_ExitLibrary();
  } }
