 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "Common\\Common96HeadSubMethods.hs_" }
 namespace _Method { #include "Common\\LMSF_Utilities.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "HSLExtensions\\Dictionary.hsl" }
 namespace _Method { #include "HSLFileDirectoryLib.hsl" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
#include "Simple media plate plus 1000x bacteria_natriegens.2.res"
variable loopCounter1;
variable mix_volume;
variable volume_left;
variable plasmid_1_id;
variable plasmid_2_id;
variable strain_1_id;
variable strain_2_id;
variable worklist_file_path;
variable plasmid_str;
variable strain_str;
variable cult_vol;
variable pipette_volume;
variable volume_factor;
variable full_vol;
variable part_vol;
variable bact_vol;
variable tip_counter_1000_channels_cellfree;
global device ML_STAR ("Simple media plate plus 1000x bacteria_natriegens.2.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    COMMON96HEADSUBMETHODS::_InitLibrary();
    LMSF_UTILITIES::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    GetParams();
    StartUp();
    volume_factor = cult_vol / (500 * 1.0);
    MECC::TraceComment(Translate("=================================================\nPipette media into 4titude growth plate; surface dispense\n================================================="));
    pipette_volume = cult_vol * 0.9;
    {
      sequence arrseqAspirate_1[];
      sequence arrseqDispense_1[];
      arrseqAspirate_1.SetSize(1);
      arrseqAspirate_1.SetAt(0, ML_STAR.Media_source);
      arrseqDispense_1.SetSize(1);
      arrseqDispense_1.SetAt(0, ML_STAR.No_bacteria);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 5);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslFalse);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_1, arrseqDispense_1, 1, 1, cult_vol, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, ML_STAR.No_bacteria) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    {
      sequence arrseqAspirate_2[];
      sequence arrseqDispense_2[];
      arrseqAspirate_2.SetSize(1);
      arrseqAspirate_2.SetAt(0, ML_STAR.Media_source);
      arrseqDispense_2.SetSize(1);
      arrseqDispense_2.SetAt(0, ML_STAR.Bacteria_dilution_to);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 5);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslFalse);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_2, arrseqDispense_2, 1, 1, pipette_volume, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.Media_source, ML_STAR.Bacteria_dilution_to) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    MECC::TraceComment(Translate("Set full_volume and part_volume, used for diluting bacteria 10X and 100X in ABGene plate"));
    full_vol = 800 * volume_factor;
    part_vol = 720 * volume_factor;
    MECC::TraceComment(Translate("        =================================================\n        Distribute media for bacteria into ABGene plate (max volumen 1200 uL/well)\n        ================================================="));
    ML_STAR.Media_source.SetCurrentPosition(1);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    bact_vol = 80 * volume_factor;
    MECC::TraceComment(Translate("        =================================================\n        Dilute bacteria (add bacteria stock 1 to bacterial_1_10x and add bacteria stock 2 to bacteria_2_10x)\n        ================================================="));
    {
      sequence arrseqAspirate_3[];
      sequence arrseqDispense_3[];
      arrseqAspirate_3.SetSize(1);
      arrseqAspirate_3.SetAt(0, ML_STAR.Bacteria_stock_1);
      arrseqDispense_3.SetSize(1);
      arrseqDispense_3.SetAt(0, ML_STAR.Bacteria_1_10x);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
      PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3.5);
      PTL::SetPipettingState("AspiratePrerinsingMixVolume", 300);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      PTL::SetPipettingState("DispensePrerinsingMixCycles", 2);
      PTL::SetPipettingState("DispensePrerinsingMixPosition", 2);
      PTL::SetPipettingState("DispensePrerinsingMixVolume", 800);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_3, arrseqDispense_3, 1, 1, bact_vol, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Bacteria_stock_1, ML_STAR.Bacteria_1_10x) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    {
      sequence arrseqAspirate_4[];
      sequence arrseqDispense_4[];
      arrseqAspirate_4.SetSize(1);
      arrseqAspirate_4.SetAt(0, ML_STAR.Bacteria_stock_2);
      arrseqDispense_4.SetSize(1);
      arrseqDispense_4.SetAt(0, ML_STAR.Bacteria_2_10x);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
      PTL::SetPipettingState("AspiratePrerinsingMixPosition", 3.5);
      PTL::SetPipettingState("AspiratePrerinsingMixVolume", 300);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      PTL::SetPipettingState("DispensePrerinsingMixCycles", 2);
      PTL::SetPipettingState("DispensePrerinsingMixPosition", 2);
      PTL::SetPipettingState("DispensePrerinsingMixVolume", 800);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_4, arrseqDispense_4, 1, 1, bact_vol, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Bacteria_stock_2, ML_STAR.Bacteria_2_10x) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    {
      sequence arrseqAspirate_5[];
      sequence arrseqDispense_5[];
      arrseqAspirate_5.SetSize(1);
      arrseqAspirate_5.SetAt(0, ML_STAR.Bacteria_all_10x);
      arrseqDispense_5.SetSize(1);
      arrseqDispense_5.SetAt(0, ML_STAR.Bacteria_all_100x);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 5);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 11);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
      PTL::SetPipettingState("AspiratePrerinsingMixPosition", 5);
      PTL::SetPipettingState("AspiratePrerinsingMixVolume", 650);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "HighVolumeFilter_Water_FastMixing_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      PTL::SetPipettingState("DispensePrerinsingMixCycles", 2);
      PTL::SetPipettingState("DispensePrerinsingMixPosition", 3.5);
      PTL::SetPipettingState("DispensePrerinsingMixVolume", 650);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, arrseqAspirate_5, arrseqDispense_5, 1, 1, bact_vol, 0, 2, hslInfinite, hslInfinite, 1, "", ML_STAR.Bacteria_all_10x, ML_STAR.Bacteria_all_100x) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    MECC::TraceComment(Translate("        =================================================\n        Dilute bacteria from ABGene plate (100x dilution) to 4titude growth plate (1000x dilution)\n        ================================================="));
    volume_left = 800 * volume_factor;
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR.Bacteria_dilution_to.SetCurrentPosition(1);
    {
      loopCounter1 = 0;
      while (
         (ML_STAR.Bacteria_dilution_to.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Bacteria_all_100x_copy2, 1, ML_STAR.Bacteria_dilution_to, 1);
        loopCounter1 = loopCounter1 + 1;
        ML_STAR.Bacteria_all_100x_copy2.SetCurrentPosition(1);
        mix_volume = volume_left - 100;
        pipette_volume = 50 * volume_factor;
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        volume_left = volume_left - pipette_volume;
        if (
           (ML_STAR.Bacteria_dilution_to.GetCurrentPosition() > 0 && ML_STAR.Bacteria_dilution_to.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Bacteria_all_100x_copy2.SetMax(ML_STAR.Bacteria_all_100x_copy2.GetTotal());
      ML_STAR.Bacteria_dilution_to.SetMax(ML_STAR.Bacteria_dilution_to.GetTotal());
      ML_STAR.Bacteria_all_100x_copy2.SetCurrentPosition(1);
      ML_STAR.Bacteria_dilution_to.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    if(0){
      CalculateOutputs();
      SaveWorklistAndMetadata();
    }
    CleanUp();
    COMMON96HEADSUBMETHODS::_ExitLibrary();
    LMSF_UTILITIES::_ExitLibrary();
  } }
