global device ML_STAR ("Visual_NTR_lib_demo.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "Visual_NTR_library\\Visual_NTR_library.hs_" }
#include "Visual_NTR_lib_demo.res"
variable loopCounter1;
variable tipcount;
sequence dummySeq;
sequence default;
sequence myWasteNTRSeq_onCarriers;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    VISUAL_NTR_LIBRARY::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    if(0){
      ML_STAR.NTR_Tips96_50uL.SetCurrentPosition(1);
      tipcount = Translate("TipCounter_CORE96_columns");
      VISUAL_NTR_LIBRARY::MPH_TipCounter_Edit(ML_STAR, ML_STAR.NTR_Tips96_50uL, tipcount, Translate("Select the available 50uL stacked tips"), 1, 999);
      {
        for(loopCounter1 = 0; loopCounter1 < 24;)
        {
          loopCounter1 = loopCounter1 + 1;
          VISUAL_NTR_LIBRARY::MPH_TipCounter_Write(ML_STAR, ML_STAR.NTR_Tips96_50uL, tipcount, ML_STAR.NTR_Tips96_50uL_WASTE, ML_STAR.COREGripTool_AtWaste_1000ul_0001, 1, 0, 2, 0, 0, Translate("Please reload the 50uL tips"), 0, 999);
          ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
          ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        }
      }
      ML_STAR.NTR_Tips96_50uL.SetCurrentPosition(1);
      tipcount = Translate("TipCounter_CORE96_columns");
      VISUAL_NTR_LIBRARY::MPH_TipCounter_Edit(ML_STAR, ML_STAR.NTR_Tips96_50uL, tipcount, Translate("Select the available 50uL stacked tips"), 0, 999);
      {
        for(loopCounter1 = 0; loopCounter1 < 24;)
        {
          loopCounter1 = loopCounter1 + 1;
          VISUAL_NTR_LIBRARY::MPH_TipCounter_Write(ML_STAR, ML_STAR.NTR_Tips96_50uL, tipcount, ML_STAR.NTR_Tips96_50uL_WASTE, ML_STAR.COREGripTool_AtWaste_1000ul_0001, 1, 0, 2, 0, 0, Translate("Please reload the 50uL tips"), 1, 999);
          ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
          ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        }
      }
      ML_STAR.NTR_384head_96tips_50ul.SetCurrentPosition(1);
      tipcount = Translate("TipCounter_CORE384_96");
      VISUAL_NTR_LIBRARY::MPH_TipCounter_Edit(ML_STAR, ML_STAR.NTR_384head_96tips_50ul, tipcount, Translate("Select the available 50uL stacked tips"), 0, 999);
      {
        for(loopCounter1 = 0; loopCounter1 < 24;)
        {
          loopCounter1 = loopCounter1 + 1;
          VISUAL_NTR_LIBRARY::MPH_TipCounter_Write(ML_STAR, ML_STAR.NTR_384head_96tips_50ul, tipcount, ML_STAR.NTR_384head_96tips_50ul_WASTE, ML_STAR.COREGripTool_AtWaste_1000ul_0001, 1, 0, 2, 0, 0, Translate("Please reload the 384head 96 tip racks of 50uL"), 1, 999);
          ML_STAR._BAE15959_BFAF_451b_AEBC_25AE7E04EB82("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"); // Head384TipPickUp
          ML_STAR._F80572BC_ED64_4dc5_8D51_2BB7EA308DCD("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"); // Head384TipEject
        }
      }
      ML_STAR.NTR_384head_384tips_50ul.SetCurrentPosition(1);
      tipcount = Translate("TipCounter_CORE384");
      VISUAL_NTR_LIBRARY::MPH_TipCounter_Edit(ML_STAR, ML_STAR.NTR_384head_384tips_50ul, tipcount, Translate("Select the available 50uL stacked tips"), 1, 999);
      {
        for(loopCounter1 = 0; loopCounter1 < 24;)
        {
          loopCounter1 = loopCounter1 + 1;
          VISUAL_NTR_LIBRARY::MPH_TipCounter_Write(ML_STAR, ML_STAR.NTR_384head_384tips_50ul, tipcount, ML_STAR.NTR_384head_384tips_50ul_WASTE, ML_STAR.COREGripTool_AtWaste_1000ul_0001, 1, 0, 2, 0, 0, Translate("Please reload the 384head 96 tip racks of 50uL"), 1, 999);
          ML_STAR._BAE15959_BFAF_451b_AEBC_25AE7E04EB82("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"); // Head384TipPickUp
          ML_STAR._F80572BC_ED64_4dc5_8D51_2BB7EA308DCD("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"); // Head384TipEject
        }
      }
      ML_STAR.NTR_Tips96_50uL.SetCurrentPosition(1);
      tipcount = Translate("TipCounter_Channels");
      VISUAL_NTR_LIBRARY::Channels_TipCounter_Edit(ML_STAR, ML_STAR.NTR_Tips96_50uL, tipcount, Translate("Please select the available 50uL stacked tips"), 1, 999);
      {
        for(loopCounter1 = 0; loopCounter1 < 48;)
        {
          loopCounter1 = loopCounter1 + 1;
          VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, ML_STAR.NTR_Tips96_50uL, tipcount, ML_STAR.NTR_Tips96_50uL_WASTE, ML_STAR.COREGripTool_AtWaste_1000ul_0001, 1, 1, 0, dummySeq, 0, 2, 0, 0, Translate("Please reload 50uL tips"), 999);
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
      }
      ML_STAR.NTR_Tips96_50uL.SetCurrentPosition(1);
      ML_STAR.Empty_Tip_rack_50uL.SetCurrentPosition(93);
      tipcount = Translate("TipCounter_Channels");
      VISUAL_NTR_LIBRARY::Channels_TipCounter_Edit(ML_STAR, ML_STAR.NTR_Tips96_50uL, tipcount, Translate("Please select the available 50uL stacked tips"), 0, 999);
      {
        for(loopCounter1 = 0; loopCounter1 < 120;)
        {
          loopCounter1 = loopCounter1 + 1;
          VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, ML_STAR.NTR_Tips96_50uL, tipcount, ML_STAR.NTR_Tips96_50uL_WASTE, ML_STAR.COREGripTool_AtWaste_1000ul_0001, 1, 0, 0, dummySeq, 0, 2, 0, 0, Translate("Please reload 50uL tips"), 999);
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
      }
    }
    ML_STAR.NTR_Tips96_50uL.SetCurrentPosition(1);
    ML_STAR.Empty_Tip_rack_50uL.SetCurrentPosition(1);
    tipcount = Translate("TipCounter_Channels");
    VISUAL_NTR_LIBRARY::Channels_TipCounter_Edit(ML_STAR, ML_STAR.NTR_Tips96_50uL, tipcount, Translate("Please select the available 50uL stacked tips"), 1, 999);
    {
      for(loopCounter1 = 0; loopCounter1 < 300;)
      {
        loopCounter1 = loopCounter1 + 1;
        VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, ML_STAR.NTR_Tips96_50uL, tipcount, ML_STAR.NTR_Tips96_50uL_WASTE, ML_STAR.COREGripTool_AtWaste_1000ul_0001, 1, 1, 1, ML_STAR.Empty_Tip_rack_50uL, 0, 2, 0, 0, Translate("Please reload 50uL tips"), 999);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
    if(0){
      ML_STAR.NTR_Tips96_50uL.SetCurrentPosition(1);
      ML_STAR.Empty_Tip_rack_50uL.SetCurrentPosition(1);
      tipcount = Translate("TipCounter_Channels");
      VISUAL_NTR_LIBRARY::Channels_TipCounter_Edit(ML_STAR, ML_STAR.NTR_Tips96_50uL, tipcount, Translate("Please select the available 50uL stacked tips"), 0, 20);
      {
        for(loopCounter1 = 0; loopCounter1 < 200;)
        {
          loopCounter1 = loopCounter1 + 1;
          VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, ML_STAR.NTR_Tips96_50uL, tipcount, ML_STAR.NTR_Tips96_50uL_WASTE, ML_STAR.COREGripTool_AtWaste_1000ul_0001, 1, 1, 1, ML_STAR.Empty_Tip_rack_50uL, 0, 2, 0, 0, Translate("Please reload 50uL tips"), 30);
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
      }
      ML_STAR.tips384.SetCurrentPosition(1);
      tipcount = Translate("TipCounter_CORE384");
      VISUAL_NTR_LIBRARY::MPH_TipCounter_Edit(ML_STAR, ML_STAR.tips384, tipcount, Translate("Select the available 50uL stacked tips"), 1, 999);
      {
        for(loopCounter1 = 0; loopCounter1 < 24;)
        {
          loopCounter1 = loopCounter1 + 1;
          VISUAL_NTR_LIBRARY::MPH_TipCounter_Write(ML_STAR, ML_STAR.tips384, tipcount, ML_STAR.NTR_384head_384tips_50ul_WASTE, ML_STAR.COREGripTool_AtWaste_1000ul_0001, 1, 0, 2, 0, 0, Translate("Please reload the 384head 96 tip racks of 50uL"), 1, 999);
          ML_STAR._BAE15959_BFAF_451b_AEBC_25AE7E04EB82("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"); // Head384TipPickUp
          ML_STAR._F80572BC_ED64_4dc5_8D51_2BB7EA308DCD("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"); // Head384TipEject
        }
      }
      ML_STAR.NTR_Tips96_50uL.SetCurrentPosition(1);
      tipcount = Translate("TipCounter_CORE96_columns");
      VISUAL_NTR_LIBRARY::Reset_TipCounter(tipcount);
      VISUAL_NTR_LIBRARY::MPH_TipCounter_Edit(ML_STAR, ML_STAR.NTR_Tips96_50uL, tipcount, Translate("Select the available 50uL stacked tips"), 0, 999);
      {
        for(loopCounter1 = 0; loopCounter1 < 24;)
        {
          loopCounter1 = loopCounter1 + 1;
          VISUAL_NTR_LIBRARY::MPH_TipCounter_Write(ML_STAR, ML_STAR.NTR_Tips96_50uL, tipcount, default, ML_STAR.COREGripTool_AtWaste_1000ul_0001, 1, 0, 2, 0, 0, Translate("Please reload the 50uL tips"), 1, 999);
          ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
          ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        }
      }
      ML_STAR.NTR_Tips96_50uL.SetCurrentPosition(1);
      tipcount = Translate("TipCounter_CORE96_rows");
      VISUAL_NTR_LIBRARY::Reset_TipCounter(tipcount);
      VISUAL_NTR_LIBRARY::MPH_TipCounter_Edit(ML_STAR, ML_STAR.NTR_Tips96_50uL, tipcount, Translate("Select the available 50uL stacked tips"), 2, 999);
      {
        for(loopCounter1 = 0; loopCounter1 < 24;)
        {
          loopCounter1 = loopCounter1 + 1;
          VISUAL_NTR_LIBRARY::MPH_TipCounter_Write(ML_STAR, ML_STAR.NTR_Tips96_50uL, tipcount, default, ML_STAR.COREGripTool_AtWaste_1000ul_0001, 1, 0, 2, 0, 0, Translate("Please reload the 50uL tips"), 0, 999);
          ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
          ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        }
      }
      ML_STAR.NTR_Tips96_50uL.SetCurrentPosition(1);
      tipcount = Translate("TipCounter_CORE96_rows");
      VISUAL_NTR_LIBRARY::Reset_TipCounter(tipcount);
      VISUAL_NTR_LIBRARY::MPH_TipCounter_Edit(ML_STAR, ML_STAR.NTR_Tips96_50uL, tipcount, Translate("Select the available 50uL stacked tips"), 0, 999);
      {
        for(loopCounter1 = 0; loopCounter1 < 24;)
        {
          loopCounter1 = loopCounter1 + 1;
          VISUAL_NTR_LIBRARY::MPH_TipCounter_Write(ML_STAR, ML_STAR.NTR_Tips96_50uL, tipcount, default, ML_STAR.COREGripTool_AtWaste_1000ul_0001, 1, 0, 2, 1, 1, Translate("Please reload the 50uL tips"), 1, 999);
          ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
          ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        }
      }
      ML_STAR.NTR_Tips96_50uL.SetCurrentPosition(1);
      ML_STAR.Empty_Tip_rack_50uL.SetCurrentPosition(93);
      tipcount = Translate("TipCounter_Channels");
      VISUAL_NTR_LIBRARY::Channels_TipCounter_Edit(ML_STAR, ML_STAR.Tips50uL_notStacked, tipcount, Translate("Please select the available 50uL not stacked tips"), 0, 999);
      {
        for(loopCounter1 = 0; loopCounter1 < 120;)
        {
          loopCounter1 = loopCounter1 + 1;
          VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, ML_STAR.Tips50uL_notStacked, tipcount, ML_STAR.NTR_Tips96_50uL_WASTE, ML_STAR.COREGripTool_AtWaste_1000ul_0001, 1, 0, 0, dummySeq, 0, 2, 0, 0, Translate("Please reload 50uL tips"), 999);
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
      }
      ML_STAR.NTR_Tips96_50uL.SetCurrentPosition(1);
      tipcount = Translate("TipCounter_CORE96_columns");
      VISUAL_NTR_LIBRARY::SortSeqToDiscardEmptyNTROnDeck(ML_STAR.Discard_50uLNTR_onDeck, 0, myWasteNTRSeq_onCarriers, ML_STAR);
      VISUAL_NTR_LIBRARY::MPH_TipCounter_Edit(ML_STAR, ML_STAR.NTR_Tips96_50uL, tipcount, Translate("Select the available 50uL stacked tips"), 0, 999);
      {
        for(loopCounter1 = 0; loopCounter1 < 50;)
        {
          loopCounter1 = loopCounter1 + 1;
          VISUAL_NTR_LIBRARY::MPH_TipCounter_Write(ML_STAR, ML_STAR.NTR_Tips96_50uL, tipcount, myWasteNTRSeq_onCarriers, ML_STAR.COREGripTool_AtWaste_1000ul_0001, 1, 0, 2, 0, 0, Translate("Please reload the 50uL tips"), 1, 999);
          ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
          ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        }
      }
    }
    VISUAL_NTR_LIBRARY::_ExitLibrary();
  } }
