 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "VirtualLabware_V2.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLUtilLib2.hsl" }
#include "D4100_Zyppy-96_Plasmid_MagBead_Miniprep_v1.2.res"
variable varElapsedTime;
variable varHHS1;
variable varShakeSpeed;
variable loopCounter7;
variable ret_StopTimer;
global device ML_STAR ("D4100_Zyppy-96_Plasmid_MagBead_Miniprep_v1.2.lay", "ML_STAR", hslTrue);
dialog customDialog_1;
dialog customDialog_2;
variable varMagBeadVol;
variable varAbort;
variable varElutionVol;
variable varNeutralizationVol;
variable varDeepBlueLysisVol;
variable varLysateTransferVol;
dialog dialogHandle_3;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("Method:   Zyppy-96 Plasmid MagBead MiniPrep\nBy:           Kevin Lin, Zymo Research\nDate:       March 12, 2018\nVersion:   1.2\n\nScript is intended for starting sample inputs of E.coli LB culture of ~700 ul per well\nHHS - uses flat bottom plate adapter\nAssumes starting samples are already in 2.0 mL Deep Well Plate\nMagBinding Beads and MagClearing Beads are held in 15 mL conicals.\nUses CO-RE MPH to do buffer aspirate/dispense and pipet mixing\nUses Alpaqua Magnum FLX as magnetic stand\nTip Eject is set to waste\nMagBead Volume, Various Buffer Volumes, Elution Volume are all flexible"));
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    varHHS1 = Translate("HHS1");
    varShakeSpeed = 1200;
    HSLHamHeaterShaker::CreateStarDevice(ML_STAR, 1, varHHS1);
    HSLHamHeaterShaker::SetPlateLock(varHHS1, 0);
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    varAbort = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
    if (varAbort == 3)
    {
      abort;
    }
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    varAbort = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    varMagBeadVol = customDialog_1.GetCustomDialogProperty( "numeric1.Value" );
    varDeepBlueLysisVol = customDialog_1.GetCustomDialogProperty( "numeric2.Value" );
    varElutionVol = customDialog_1.GetCustomDialogProperty( "numeric3.Value" );
    varLysateTransferVol = customDialog_1.GetCustomDialogProperty( "numeric4.Value" );
    varNeutralizationVol = customDialog_1.GetCustomDialogProperty( "numeric5.Value" );
    if (varAbort == 3)
    {
      abort;
    }
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    TransferPlate(ML_STAR.CulturePlate, ML_STAR.Plate_OnHHS, 1);
    HHS_Shake(varHHS1, varShakeSpeed, 10);
    Timer(300);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    PTL::ResetPipettingStateAndSequences("");
    PTL::SetPipettingState("UserResponseTime", hslInfinite);
    PTL::SetPipettingState("ErrorHandling", 3);
    PTL::SetPipettingState("TipCountingEnabled", hslFalse);
    PTL::SetPipettingState("TipCountingIdentifier", "");
    PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
    PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
    PTL::SetPipettingState("CalibrateCarrierChannel", -1);
    PTL::SetPipettingState("InitializeChannelVariable", "");
    PTL::SetPipettingState("InitializeEnabled", hslFalse);
    PTL::SetPipettingState("TipPickupChannelVariable", "");
    PTL::SetPipettingState("TipPickupEnabled", hslFalse);
    PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
    PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
    PTL::SetPipettingState("TipEjectChannelVariable", "");
    PTL::SetPipettingState("AspirateMode", 0);
    PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
    PTL::SetPipettingState("AspirateFluidHeight", 0);
    PTL::SetPipettingState("AspirateSubmergeDepth", 2);
    PTL::SetPipettingState("AspirateChannelVariable", "");
    PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
    PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
    PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
    PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_AliquotDispenseJet_Part");
    PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
    PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
    PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
    PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
    PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
    PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
    PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
    PTL::SetPipettingState("AspiratePrerinsingMixCycles", 10);
    PTL::SetPipettingState("AspiratePrerinsingMixPosition", 0);
    PTL::SetPipettingState("AspiratePrerinsingMixVolume", 200);
    PTL::SetPipettingState("DispenseSubmergeDepth", 0);
    PTL::SetPipettingState("DispenseChannelVariable", "");
    PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
    PTL::SetPipettingState("DispenseFluidHeight", 40);
    PTL::SetPipettingState("DispenseMode", 1);
    PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
    PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_AliquotDispenseJet_Part");
    PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
    PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
    PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
    PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
    PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
    PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
    PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
    PTL::SetPipettingState("DispenseRestVolumeDestination", 1);
    PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
    PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 5);
    PTL::SetPipettingState("AliquotEnabled", hslTrue);
    PTL::SetPipettingState("AliquotPreAspirateVolume", 5);
    PTL::SetPipettingState("AliquotAspirateDefaultMixingEnabled", hslFalse);
    if( 0 == PTL::Pipette(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MagClearingBeads_Conical, ML_STAR.Plate_OnHHS, 1, 1, 50, 5, 2, hslInfinite, hslInfinite, hslInfinite, "") )
    {
          PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR.Plate_OnHHS.SetCurrentPosition(1);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    HHS_Shake(varHHS1, 900, 60);
    TransferPlate(ML_STAR.Plate_OnHHS, ML_STAR.Plate_OnMagPlate, 0);
    Timer(150);
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    Timer(150);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    TransferPlate(ML_STAR.BindingPlate, ML_STAR.Plate_OnHHS, 0);
    TransferPlate(ML_STAR.Plate_OnMagPlate, ML_STAR.CulturePlate, 1);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    PTL::ResetPipettingStateAndSequences("");
    PTL::SetPipettingState("UserResponseTime", hslInfinite);
    PTL::SetPipettingState("ErrorHandling", 3);
    PTL::SetPipettingState("TipCountingEnabled", hslFalse);
    PTL::SetPipettingState("TipCountingIdentifier", "");
    PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
    PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
    PTL::SetPipettingState("CalibrateCarrierChannel", -1);
    PTL::SetPipettingState("InitializeChannelVariable", "");
    PTL::SetPipettingState("InitializeEnabled", hslFalse);
    PTL::SetPipettingState("TipPickupChannelVariable", "");
    PTL::SetPipettingState("TipPickupEnabled", hslFalse);
    PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
    PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
    PTL::SetPipettingState("TipEjectChannelVariable", "");
    PTL::SetPipettingState("AspirateMode", 0);
    PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
    PTL::SetPipettingState("AspirateFluidHeight", 0);
    PTL::SetPipettingState("AspirateSubmergeDepth", 2);
    PTL::SetPipettingState("AspirateChannelVariable", "");
    PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
    PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
    PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
    PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_AliquotDispenseJet_Part");
    PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
    PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
    PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
    PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
    PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
    PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
    PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
    PTL::SetPipettingState("AspiratePrerinsingMixCycles", 10);
    PTL::SetPipettingState("AspiratePrerinsingMixPosition", 0);
    PTL::SetPipettingState("AspiratePrerinsingMixVolume", 200);
    PTL::SetPipettingState("DispenseSubmergeDepth", 0);
    PTL::SetPipettingState("DispenseChannelVariable", "");
    PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
    PTL::SetPipettingState("DispenseFluidHeight", 40);
    PTL::SetPipettingState("DispenseMode", 1);
    PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
    PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_AliquotDispenseJet_Part");
    PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
    PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
    PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
    PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
    PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
    PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
    PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
    PTL::SetPipettingState("DispenseRestVolumeDestination", 1);
    PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
    PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 5);
    PTL::SetPipettingState("AliquotEnabled", hslTrue);
    PTL::SetPipettingState("AliquotPreAspirateVolume", 5);
    PTL::SetPipettingState("AliquotAspirateDefaultMixingEnabled", hslFalse);
    if( 0 == PTL::Pipette(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, ML_STAR.MagBindingBeads_Conical, ML_STAR.Plate_OnHHS, 1, 1, varMagBeadVol, 5, 2, hslInfinite, hslInfinite, hslInfinite, "") )
    {
          PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR.Plate_OnHHS.SetCurrentPosition(1);
    HHS_Shake(varHHS1, varShakeSpeed, 600);
    TransferPlate(ML_STAR.Plate_OnHHS, ML_STAR.Plate_OnMagPlate, 0);
    Timer(120);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    Supernatant_Removal(ML_STAR.Plate_OnMagPlate, ML_STAR.LiquidWaste, 750, 45);
    TransferPlate(ML_STAR.Plate_OnMagPlate, ML_STAR.Plate_OnHHS, 0);
    MagBead_Washing(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, ML_STAR.EndoWash_Buffer, ML_STAR.Plate_OnHHS, 200, 10);
    HHS_Shake(varHHS1, varShakeSpeed, 120);
    TransferPlate(ML_STAR.Plate_OnHHS, ML_STAR.Plate_OnMagPlate, 0);
    Timer(120);
    Supernatant_Removal(ML_STAR.Plate_OnMagPlate, ML_STAR.LiquidWaste, 200, 45);
    {
      for(loopCounter7 = 0; loopCounter7 < 2;)
      {
        loopCounter7 = loopCounter7 + 1;
        TransferPlate(ML_STAR.Plate_OnMagPlate, ML_STAR.Plate_OnHHS, 0);
        MagBead_Washing(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, ML_STAR.ZyppyWash_Buffer, ML_STAR.Plate_OnHHS, 400, 10);
        HHS_Shake(varHHS1, varShakeSpeed, 120);
        TransferPlate(ML_STAR.Plate_OnHHS, ML_STAR.Plate_OnMagPlate, 0);
        Timer(120);
        Supernatant_Removal(ML_STAR.Plate_OnMagPlate, ML_STAR.LiquidWaste, 400, 45);
      }
    }
    HSLHamHeaterShaker::StartTempCtrl(varHHS1, 65, 0);
    HSLHamHeaterShaker::WaitForTempCtrl(varHHS1);
    TransferPlate(ML_STAR.Plate_OnMagPlate, ML_STAR.Plate_OnHHS, 0);
    Timer(600);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    HHS_Shake(varHHS1, varShakeSpeed, 300);
    TransferPlate(ML_STAR.Plate_OnHHS, ML_STAR.Plate_OnMagPlate, 1);
    Timer(120);
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    HSLHamHeaterShaker::Terminate();
    dialogHandle_3.SetOutput(Translate("Retrieve 96 PCR Plate containing Elutions."), "\n", Translate("Dump all residual buffers in 96 Reagent Troughs into the appropriate waste container."), "\n", Translate("Take emptied 96 Reagent Troughs and rinse with water. Troughs can be autoclaved for reuse."), "\n", Translate("Return unused new tips back to appropriate tip blister pack."), "\n", Translate("Dump all other related plastics and labware into trash (not for reuse)."), "\n");
    dialogHandle_3.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  } }
