private function HHS_Shake( variable HHSDevice, variable ShakerSpeed, variable ShakeTime ) void ;
private function MagBead_Washing( sequence & WashTipSequence, sequence & SourceReservoir, sequence & TargetPlate, variable WashVolume, variable MixCycles ) void ;
private function Supernatant_Removal( sequence & SourcePlate, sequence & TargetReservoir, variable SupernatantVolume, variable DispenseHeight ) void ;
private function Timer( variable Time ) void ;
private function TransferPlate( sequence & SourcePlate, sequence & DestinationPlate, variable EjectTool ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
}

private function HHS_Shake( variable HHSDevice, variable ShakerSpeed, variable ShakeTime ) void {
  HSLHamHeaterShaker::StartShakerTimed(HHSDevice, ShakerSpeed, ShakeTime);
  HSLHamHeaterShaker::WaitForShaker(HHSDevice);
}

private function Timer( variable Time ) void {
  private timer timer1;
  varElapsedTime = 0.0;
  ret_StopTimer = 0;
  if( 0 == timer1.SetTimer(Time) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  ret_StopTimer = timer1.WaitTimer(hslTrue, hslTrue);
  if (0 == ret_StopTimer)
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if (ret_StopTimer == 3)
  {
    varElapsedTime = timer1.GetElapsedTime();
    TrcTrace(Translate("Timer stopped before alotted time.  The elapsed time (in seconds) is: "), varElapsedTime);
    ret_StopTimer = 0;
  }
}

private function TransferPlate( sequence & SourcePlate, sequence & DestinationPlate, variable EjectTool ) void {
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
}

private function Supernatant_Removal( sequence & SourcePlate, sequence & TargetReservoir, variable SupernatantVolume, variable DispenseHeight ) void {
  if (SupernatantVolume < 1000)
  {
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  }
  if (SupernatantVolume >= 1000)
  {
    SupernatantVolume = SupernatantVolume / (2 * 1.0);
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  }
}

private function MagBead_Washing( sequence & WashTipSequence, sequence & SourceReservoir, sequence & TargetPlate, variable WashVolume, variable MixCycles ) void {
  ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
  ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
  ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
}
