#include "96head crash recovery.res"
dialog dialogHandle_1;
dialog dialogHandle_2;
dialog dialogHandle_3;
dialog dialogHandle_4;
dialog dialogHandle_5;
dialog dialogHandle_6;
dialog dialogHandle_7;
dialog dialogHandle_8;
dialog dialogHandle_9;
dialog dialogHandle_10;
global device ML_STAR ("96head crash recovery.lay", "ML_STAR", hslTrue);
dialog dialogHandle_11;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    dialogHandle_1.SetOutput(Translate("Init Z drive 96head"));
    dialogHandle_1.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    dialogHandle_3.SetOutput(Translate("Init 1ml channels Z drive"));
    dialogHandle_3.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    if(0){
      dialogHandle_4.SetOutput(Translate("Init 5ml channels Z drive"));
      dialogHandle_4.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
    dialogHandle_6.SetOutput(Translate("Init Y drive 96head move to back"));
    dialogHandle_6.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    dialogHandle_5.SetOutput(Translate("Move 96head to the front"));
    dialogHandle_5.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    dialogHandle_2.SetOutput(Translate("Init x- arm"));
    dialogHandle_2.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    dialogHandle_10.SetOutput(Translate("Move X arm to 96head waste"));
    dialogHandle_10.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    dialogHandle_7.SetOutput(Translate("Move 96head down in Z"));
    dialogHandle_7.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    dialogHandle_9.SetOutput(Translate("Init dosing drive of 96head"));
    dialogHandle_9.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    dialogHandle_8.SetOutput(Translate("Init squeezer drive of 96head to release tips"));
    dialogHandle_8.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    dialogHandle_11.SetOutput(Translate("Initialise STAR"));
    dialogHandle_11.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  } }
