function OnAbort(  ) void ;

function OnAbort(  ) void {
  private dialog dialogHandle_1;
  private dialog dialogHandle_2;
  private dialog dialogHandle_3;
  private dialog dialogHandle_4;
  private dialog dialogHandle_5;
  private dialog dialogHandle_6;
  private dialog dialogHandle_7;
  private dialog dialogHandle_8;
  private dialog dialogHandle_9;
  private dialog dialogHandle_10;
  Trace("On Abort");
  dialogHandle_3.SetOutput(Translate("On Abort"));
  dialogHandle_3.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  dialogHandle_8.SetOutput(Translate(""));
  dialogHandle_8.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  dialogHandle_4.SetOutput(Translate(""));
  dialogHandle_4.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  dialogHandle_6.SetOutput(Translate(""));
  dialogHandle_6.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  dialogHandle_5.SetOutput(Translate(""));
  dialogHandle_5.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  dialogHandle_2.SetOutput(Translate(""));
  dialogHandle_2.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  dialogHandle_7.SetOutput(Translate(""));
  dialogHandle_7.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  dialogHandle_10.SetOutput(Translate(""));
  dialogHandle_10.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  dialogHandle_1.SetOutput(Translate(""));
  dialogHandle_1.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  if(0){
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    dialogHandle_9.SetOutput(Translate(""));
    dialogHandle_9.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
}
