 namespace _Method { #include "HSLMPELib.hsl" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLCopyFile.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "ForkandJoin Library\\HSL_ForkJoin.hsl" }
 namespace _Method { #include "HSLUtilLib.hsl" }
 namespace _Method { #include "HSLTimLib.hsl" }
 namespace _Method { #include "HSLUtilLib2.hsl" }
 namespace _Method { #include "HSLMappingReport.hsl" }
variable MPE2;
variable methods_path;
variable mpe_folder;
variable mpe_parameter_file;
variable collectionPlateHeight;
variable var_str_filter_plate;
variable nozzleHeight;
variable offsetFromNozzles;
variable filterPlateHeight;
variable file_exists;
variable var_int_entry;
variable var_str_date;
variable var_flo_stack_height;
variable wasteContainer;
variable var_str_collection_plate;
file File_Create;
variable var_str_set_name;
variable var_int_create_new_profile;
variable var_int_profile_selected;
variable entry_name;
variable retValueDialog;
file File_Read;
variable arr_flo_stack_height[];
variable arr_offsetFromNozzles[];
variable arr_filterPlateHeight[];
variable arr_collectionPlateHeight[];
variable arr_nozzleHeight[];
variable arr_profile[];
variable profile_selected;
variable var_int_edit_profile;
variable var_str_collection_plate_settings;
variable var_str_filter_plate_settings;
variable arr_str_collection_plate[];
variable arr_str_filter_plate[];
variable edit_visible;
variable enabled;
variable var_int_last_entry;
variable update_sql;
variable var_str_update_date;
file File_Update;
variable var_str_error;
variable arr_entry_numbers[];
variable Var_Int_Simulation;
variable Initialization_Time;
variable var_flo_volume;
variable var_str_liquid_notes;
variable var_str_process_desc;
variable var_int_process_to_waste;
variable var_str_observations;
variable var_str_process;
variable var_str_process_success;
variable MPE_Success;
variable var_str_date_time;
variable log_folder_path;
variable unique_run_id;
variable var_str_time;
variable var_str_process_location;
variable report_file;
variable num_profiles;
variable arr_set_name[];
variable var_str_profile_settings;
variable Time_ID;
variable Date_ID;
dialog dialogHandle_1;
variable var_str_update_time;
variable spacer_distance;
variable exposed_nozzle;
variable filter_collection_median;
variable minimum_nozzle_offset;
variable maximum_nozzle_offset;
variable var_str_fix;
variable var_int_error_offset;
variable var_int_error_filter;
variable var_int_error_collection;
variable var_int_error_nozzle;
variable default_filterPlateHeight;
variable default_var_flo_stack_height;
variable default_collectionPlateHeight;
variable default_nozzleHeight;
variable default_offsetFromNozzles;
variable process_save;
variable count_sql;
variable save_command;
variable var_str_process_dest;
variable profile_exists;
file Profile_Check;
file Update_File;
variable var_int_process_to_collection;
file Previous_Settings;
variable entry_exists;
variable save_elution;
variable save_other;
variable filter_sql;
variable save_dry;
variable save_sample_addition;
variable save_wash;
variable retValueDialog_Save;
variable ret_value_back;
variable Test_Count;
variable Finish_Method_Visible;
variable Init_Dialog;
variable Processing_Time;
variable int_DetermineVacuumTime;
variable bol_PostVacuum;
variable bol_ExcessiveVaccumCheck;
variable bol_PreVacuum;
variable Parallel_Vacuum;
variable bol_SimulationMode;
variable int_PreVacTime;
variable int_PostVacTime;
timer PostVac_Timer;
timer PreVac_Timer;
variable bol_MPEInitialized;
dialog customDialog_2;
dialog dialogHandle_3;
dialog customDialog_4;
dialog customDialog_5;
dialog customDialog_6;
dialog dialogHandle_7;
dialog customDialog_8;
dialog customDialog_9;
dialog customDialog_10;
dialog customDialog_11;
variable bol_ReturnPlate;
variable bol_RunWashProtocol;
dialog customDialog_12;
dialog dialogHandle_13;
dialog customDialog_14;
dialog customDialog_15;
dialog customDialog_16;
dialog customDialog_17;
variable ret_FlushWasteQuery;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    ::RegisterAbortHandler( "OnAbort");
    bol_SimulationMode = Util::GetSimulationMode();
    var_int_entry = 1;
    var_str_date = TimGetFormattedDate(Translate("%m/%d/%Y"));
    var_str_time = TimGetFormattedTime(Translate("%H%M"));
    default_var_flo_stack_height = 60.0;
    var_str_filter_plate = Translate("Default");
    var_str_collection_plate = Translate("Default");
    var_str_set_name = Translate("Default");
    default_filterPlateHeight = 15.1;
    default_nozzleHeight = 38.1;
    default_collectionPlateHeight = 43.7;
    default_offsetFromNozzles = 2;
    wasteContainer = 0;
    var_int_create_new_profile = 1;
    var_str_process = Translate("");
    bol_PostVacuum = 1;
    bol_PreVacuum = 0;
    methods_path = FilGetMethodsPath();
    mpe_folder = StrConcat4(methods_path, Translate("\\"), Translate("[MPE]2"), Translate("\\"));
    CopyFile::CreateDirectory(mpe_folder);
    mpe_parameter_file = StrConcat4(mpe_folder, Translate("\\"), Translate("MPE2_Parameters"), Translate(".xls"));
    file_exists = HSLExtensions::File::Exists(mpe_parameter_file);
    if (file_exists == 0)
    {
      File_Create.AddField("ENTRY", var_int_entry, hslInteger);
      File_Create.AddField("LAST_UPDATED", var_str_date, hslString, 255);
      File_Create.AddField("TIME_UPDATED", var_str_time, hslString, 255);
      File_Create.AddField("SET_NAME", var_str_set_name, hslString, 255);
      File_Create.AddField("FILTER_PLATE_NAME", var_str_filter_plate, hslString, 255);
      File_Create.AddField("COLLECTION_PLATE_NAME", var_str_collection_plate, hslString, 255);
      File_Create.AddField("FILTER_HEIGHT", filterPlateHeight, hslFloat);
      File_Create.AddField("NOZZLE_HEIGHT", nozzleHeight, hslFloat);
      File_Create.AddField("COLLECTION_PLATE_HEIGHT", collectionPlateHeight, hslFloat);
      File_Create.AddField("OFFSET_FROM_NOZZLES", offsetFromNozzles, hslFloat);
      File_Create.AddField("STACK_HEIGHT", var_flo_stack_height, hslFloat);
      if( 0 == File_Create.Open(mpe_parameter_file + " " + "PARAMETERS", hslWrite) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, mpe_parameter_file, "HxMetEdCompCmd");
      }
      if( 0 != File_Create.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      File_Create.RemoveFields();
      File_Create.AddField("SET_NAME", var_str_set_name, hslString, 255);
      File_Create.AddField("DESTINATION", var_str_process_dest, hslString, 255);
      File_Create.AddField("Sample Addition", save_sample_addition, hslString, 255);
      File_Create.AddField("Wash", save_wash, hslString, 255);
      File_Create.AddField("Dry", save_dry, hslString, 255);
      File_Create.AddField("Elution", save_elution, hslString, 255);
      File_Create.AddField("Other", save_other, hslString, 255);
      if( 0 == File_Create.Open(mpe_parameter_file + " " + "PREVIOUS_SETTINGS", hslWrite) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, mpe_parameter_file, "HxMetEdCompCmd");
      }
      if( 0 != File_Create.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      File_Create.RemoveFields();
    }
    Trace("MPE2 ID:  ", MPE2);
    Connect_to_MPE(MPE2);
    Trace("MPE2 ID:  ", MPE2);
    {
      while (1 == 1)
      {
        {
          while (1 == 1)
          {
            File_Read.AddField("ENTRY", var_int_entry, hslInteger);
            File_Read.AddField("LAST_UPDATED", var_str_update_date, hslString, 255);
            File_Read.AddField("TIME_UPDATED", var_str_update_time, hslString, 255);
            File_Read.AddField("SET_NAME", var_str_set_name, hslString, 255);
            File_Read.AddField("FILTER_PLATE_NAME", var_str_filter_plate, hslString, 255);
            File_Read.AddField("COLLECTION_PLATE_NAME", var_str_collection_plate, hslString, 255);
            File_Read.AddField("FILTER_HEIGHT", filterPlateHeight, hslFloat);
            File_Read.AddField("NOZZLE_HEIGHT", nozzleHeight, hslFloat);
            File_Read.AddField("COLLECTION_PLATE_HEIGHT", collectionPlateHeight, hslFloat);
            File_Read.AddField("OFFSET_FROM_NOZZLES", offsetFromNozzles, hslFloat);
            File_Read.AddField("STACK_HEIGHT", var_flo_stack_height, hslFloat);
            if( 0 == File_Read.Open(mpe_parameter_file + " " + "PARAMETERS$", hslRead, "SELECT * FROM [PARAMETERS$] ORDER BY LAST_UPDATED DESC, TIME_UPDATED DESC") )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, mpe_parameter_file, "HxMetEdCompCmd");
            }
            arr_profile.SetSize(0);
            arr_set_name.SetSize(0);
            arr_entry_numbers.SetSize(0);
            arr_filterPlateHeight.SetSize(0);
            arr_nozzleHeight.SetSize(0);
            arr_collectionPlateHeight.SetSize(0);
            arr_offsetFromNozzles.SetSize(0);
            arr_flo_stack_height.SetSize(0);
            arr_str_filter_plate.SetSize(0);
            arr_str_collection_plate.SetSize(0);
            {
              while (
                 (File_Read.Eof() == 0)
              )
              {
                if( 0 == File_Read.ReadRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                entry_name = Translate("");
                entry_name = StrConcat4(entry_name, var_str_set_name, Translate(""), Translate(""));
                if (var_str_filter_plate != "Default")
                {
                  entry_name = StrConcat4(entry_name, Translate(" - "), var_str_filter_plate, Translate(""));
                }
                if (var_str_collection_plate != "Default")
                {
                  entry_name = StrConcat4(entry_name, Translate(" - "), var_str_collection_plate, Translate(""));
                }
                entry_name = StrConcat4(entry_name, Translate(" - "), var_str_update_date, Translate(""));
                arr_set_name.AddAsLast(var_str_set_name);
                arr_profile.AddAsLast(entry_name);
                arr_entry_numbers.AddAsLast(var_int_entry);
                arr_filterPlateHeight.AddAsLast(filterPlateHeight);
                arr_nozzleHeight.AddAsLast(nozzleHeight);
                arr_collectionPlateHeight.AddAsLast(collectionPlateHeight);
                arr_offsetFromNozzles.AddAsLast(offsetFromNozzles);
                arr_flo_stack_height.AddAsLast(var_flo_stack_height);
                arr_str_collection_plate.AddAsLast(var_str_collection_plate);
                arr_str_filter_plate.AddAsLast(var_str_filter_plate);
              }
            }
            if( 0 != File_Read.Close() )
            {
                  MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            File_Read.RemoveFields();
            num_profiles=arr_profile.GetSize();
            if (num_profiles > 0)
            {
              customDialog_4.InitCustomDialog("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");
              customDialog_4.SetCustomDialogArrayProperty( "Profile_Selection.ItemsSource", arr_profile );
              customDialog_4.ShowCustomDialog();
              retValueDialog = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
              var_int_profile_selected = customDialog_4.GetCustomDialogProperty( "Profile_Selection.SelectedIndex" );
              var_int_create_new_profile = customDialog_4.GetCustomDialogProperty( "New_Profile.IsChecked" );
              bol_RunWashProtocol = customDialog_4.GetCustomDialogProperty( "WashProtocol.IsChecked" );
            }
            if (retValueDialog == 3)
            {
              abort;
            }
            if (bol_RunWashProtocol == 1)
            {
              break;
            }
            if (var_int_create_new_profile == 1)
            {
              var_str_set_name = Translate("");
              var_str_filter_plate = Translate("");
              var_str_collection_plate = Translate("");
              {
                while (1 == 1)
                {
                  customDialog_10.InitCustomDialog("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");
                  customDialog_10.SetCustomDialogProperty( "Set_Name.Text", var_str_set_name );
                  customDialog_10.SetCustomDialogProperty( "Filter_Name.Text", var_str_filter_plate );
                  customDialog_10.SetCustomDialogProperty( "Collection_Name.Text", var_str_collection_plate );
                  customDialog_10.ShowCustomDialog();
                  retValueDialog = customDialog_10.GetCustomDialogProperty( "ReturnValue" );
                  var_str_set_name = customDialog_10.GetCustomDialogProperty( "Set_Name.Text" );
                  var_str_filter_plate = customDialog_10.GetCustomDialogProperty( "Filter_Name.Text" );
                  var_str_collection_plate = customDialog_10.GetCustomDialogProperty( "Collection_Name.Text" );
                  if (retValueDialog == 2)
                  {
                    break;
                  }
                  var_str_error = Translate("");
                  if (var_str_set_name == "")
                  {
                    var_str_error = StrConcat4(var_str_error, Translate("Set name can not be left blank!"), Translate("\n"), Translate(""));
                  }
                  if (var_str_filter_plate == "")
                  {
                    var_str_error = StrConcat4(var_str_error, Translate("Filter plate can not be left blank!"), Translate("\n"), Translate(""));
                  }
                  if (var_str_collection_plate == "")
                  {
                    var_str_error = StrConcat4(var_str_error, Translate("Collection plate can not be left blank!"), Translate("\n"), Translate(""));
                  }
                  count_sql = StrConcat4(Translate("SELECT COUNT(*) AS N FROM [PARAMETERS$] WHERE SET_NAME = '"), var_str_set_name, Translate("'"), Translate(""));
                  File_Read.AddField("N", entry_exists, hslInteger);
                  if( 0 == File_Read.Open(mpe_parameter_file + " " + "PARAMETERS$", hslRead, count_sql) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, mpe_parameter_file, "HxMetEdCompCmd");
                  }
                  if( 0 == File_Read.ReadRecord() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  if( 0 != File_Read.Close() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  File_Read.RemoveFields();
                  if (entry_exists > 0)
                  {
                    var_str_error = StrConcat4(var_str_error, var_str_set_name, Translate(" already exists!  Please make a unique profile name."), Translate("\n"));
                    var_str_set_name = Translate("");
                  }
                  if (var_str_error == "")
                  {
                    break;
                  }
                  dialogHandle_3.SetOutput(var_str_error);
                  dialogHandle_3.ShowOutput(Translate("Entry Error"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
                }
              }
              profile_selected = Translate("");
              profile_selected = StrConcat4(profile_selected, var_str_set_name, Translate(""), Translate(""));
              filterPlateHeight = default_filterPlateHeight;
              nozzleHeight = default_nozzleHeight;
              collectionPlateHeight = default_collectionPlateHeight;
              offsetFromNozzles = default_offsetFromNozzles;
              var_flo_stack_height = default_var_flo_stack_height;
              enabled = 1;
              edit_visible = 0;
            }
            else
            {
              var_int_entry=arr_entry_numbers.GetAt(var_int_profile_selected-1);
              var_str_filter_plate=arr_str_filter_plate.GetAt(var_int_profile_selected-1);
              var_str_collection_plate=arr_str_collection_plate.GetAt(var_int_profile_selected-1);
              profile_selected=arr_set_name.GetAt(var_int_profile_selected-1);
              filterPlateHeight=arr_filterPlateHeight.GetAt(var_int_profile_selected-1);
              nozzleHeight=arr_nozzleHeight.GetAt(var_int_profile_selected-1);
              collectionPlateHeight=arr_collectionPlateHeight.GetAt(var_int_profile_selected-1);
              offsetFromNozzles=arr_offsetFromNozzles.GetAt(var_int_profile_selected-1);
              var_flo_stack_height=arr_flo_stack_height.GetAt(var_int_profile_selected-1);
              enabled = 0;
              edit_visible = 1;
            }
            if (retValueDialog == 1)
            {
              break;
            }
          }
        }
        if (bol_RunWashProtocol == 1)
        {
          break;
        }
        var_str_profile_settings = StrConcat4(Translate("Plate Definitions for:  "), profile_selected, Translate(""), Translate(""));
        var_str_filter_plate_settings = StrConcat4(Translate("Filter Plate Settings - "), var_str_filter_plate, Translate(""), Translate(""));
        var_str_collection_plate_settings = StrConcat4(Translate("Collection Plate Settings - "), var_str_collection_plate, Translate(""), Translate(""));
        var_int_error_filter = 0;
        var_int_error_nozzle = 0;
        var_int_error_offset = 0;
        var_int_error_collection = 0;
        {
          while (1 == 1)
          {
            customDialog_9.InitCustomDialog("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");
            customDialog_9.SetCustomDialogProperty( "textBlock1.Text", var_str_profile_settings );
            customDialog_9.SetCustomDialogProperty( "Edit_Selection.IsVisible", edit_visible );
            customDialog_9.SetCustomDialogProperty( "textBlock2.Text", var_str_filter_plate );
            customDialog_9.SetCustomDialogProperty( "textBlock3.Text", var_str_collection_plate );
            customDialog_9.SetCustomDialogProperty( "Error_Filter.IsVisible", var_int_error_filter );
            customDialog_9.SetCustomDialogProperty( "FilterPlateHeight.Value", filterPlateHeight );
            customDialog_9.SetCustomDialogProperty( "FilterPlateHeight.IsEnabled", enabled );
            customDialog_9.SetCustomDialogProperty( "Error_Offset.IsVisible", var_int_error_offset );
            customDialog_9.SetCustomDialogProperty( "OffsetFromNozzles.IsEnabled", enabled );
            customDialog_9.SetCustomDialogProperty( "OffsetFromNozzles.Value", offsetFromNozzles );
            customDialog_9.SetCustomDialogProperty( "Error_Collection.IsVisible", var_int_error_collection );
            customDialog_9.SetCustomDialogProperty( "CollectionPlateHeight.IsEnabled", enabled );
            customDialog_9.SetCustomDialogProperty( "CollectionPlateHeight.Value", collectionPlateHeight );
            customDialog_9.SetCustomDialogProperty( "Error_Nozzle.IsVisible", var_int_error_nozzle );
            customDialog_9.SetCustomDialogProperty( "NozzleHeight.IsEnabled", enabled );
            customDialog_9.SetCustomDialogProperty( "NozzleHeight.Value", nozzleHeight );
            customDialog_9.ShowCustomDialog();
            retValueDialog = customDialog_9.GetCustomDialogProperty( "ReturnValue" );
            var_int_edit_profile = customDialog_9.GetCustomDialogProperty( "Edit_Selection.IsChecked" );
            filterPlateHeight = customDialog_9.GetCustomDialogProperty( "FilterPlateHeight.Value" );
            offsetFromNozzles = customDialog_9.GetCustomDialogProperty( "OffsetFromNozzles.Value" );
            collectionPlateHeight = customDialog_9.GetCustomDialogProperty( "CollectionPlateHeight.Value" );
            nozzleHeight = customDialog_9.GetCustomDialogProperty( "NozzleHeight.Value" );
            var_int_error_filter = 0;
            var_int_error_nozzle = 0;
            var_int_error_offset = 0;
            var_int_error_collection = 0;
            if (retValueDialog == 2)
            {
              break;
            }
            if (var_int_edit_profile == 1)
            {
              TrcTrace(Translate("---------------- Edit Profile ----------------"), Translate(""));
            }
            if (var_int_create_new_profile == 1)
            {
              TrcTrace(Translate("---------------- New Profile ----------------"), Translate(""));
            }
            var_str_error = Translate("");
            var_str_fix = Translate("");
            if (filterPlateHeight <= 0)
            {
              var_str_error = StrConcat4(var_str_error, Translate("Filter Plate Height must be greater than 0!"), Translate("\n"), Translate(""));
              var_int_error_filter = 1;
            }
            if (nozzleHeight <= 0)
            {
              var_str_error = StrConcat4(var_str_error, Translate("Nozzle Height must be greater than 0!"), Translate("\n"), Translate(""));
              var_int_error_nozzle = 1;
            }
            if (collectionPlateHeight <= 0)
            {
              var_str_error = StrConcat4(var_str_error, Translate("Collection Plate Height must be greater than 0!"), Translate("\n"), Translate(""));
              var_int_error_collection = 1;
            }
            spacer_distance = 6.1;
            exposed_nozzle = nozzleHeight - filterPlateHeight;
            filter_collection_median = spacer_distance;
            minimum_nozzle_offset = 0;
            maximum_nozzle_offset = 0;
            if(exposed_nozzle > spacer_distance) filter_collection_median = exposed_nozzle;
            var_flo_stack_height = filterPlateHeight + filter_collection_median + collectionPlateHeight + 2;
            //Calculate the minimum value for the nozzle offset value
            minimum_nozzle_offset = exposed_nozzle - spacer_distance;
            if(minimum_nozzle_offset < 0) minimum_nozzle_offset = 0;
            //Convert the minimum to a negative value
            minimum_nozzle_offset = minimum_nozzle_offset * -1;
            //Calculate the maximum value for nozzle offset value
            maximum_nozzle_offset = 114.0 - var_flo_stack_height;
            Trace("Filter and Collection Stack Height:  ", var_flo_stack_height);
            Trace("Minimum Nozzle Offset:  ", minimum_nozzle_offset);
            Trace("Maximum Nozzle Offset:  ", maximum_nozzle_offset);
            if (var_flo_stack_height > 114.0)
            {
              var_str_error = StrConcat4(var_str_error, Translate("The stack height for the filter, collection, and spacer exceeded the limit of the [MPE]2's internal dimensions."), Translate("\n"), Translate(""));
              var_str_fix = StrConcat4(var_str_fix, Translate("Re-check the dimensions of the filter and collection plate. If correct, consider using a shorter filter or collection plate."), Translate("\n"), Translate(""));
              var_int_error_filter = 1;
              var_int_error_nozzle = 1;
              var_int_error_collection = 1;
            }
            if (offsetFromNozzles < minimum_nozzle_offset)
            {
              minimum_nozzle_offset = StrFStrEx(minimum_nozzle_offset, 0, 3);
              var_str_error = StrConcat4(var_str_error, Translate("The [MPE]2 cannot submerge the nozzles to the distance specified in the Nozzle Offset parameter."), Translate("\n"), Translate(""));
              var_str_fix = StrConcat4(var_str_fix, Translate("Based on the filter plate dimensions, the lowest Nozzle Offset parameter that can be used is "), minimum_nozzle_offset, Translate(".\n"));
              var_int_error_offset = 1;
            }
            if (var_int_error_filter == 0)
            {
              if (offsetFromNozzles > maximum_nozzle_offset)
              {
                maximum_nozzle_offset = StrFStrEx(maximum_nozzle_offset, 0, 3);
                var_str_error = StrConcat4(var_str_error, Translate("The [MPE]2 cannot place the nozzles to the distance specified in the Nozzle Offset Parameter because this will exceed the internal stack limit."), Translate("\n"), Translate(""));
                var_str_fix = StrConcat4(var_str_fix, Translate("Based on the filter and collection plate dimensions, the largest Nozzle Offset parameter that can be used is "), maximum_nozzle_offset, Translate(".\n"));
                var_int_error_offset = 1;
              }
            }
            if (var_str_error == "")
            {
              break;
            }
            dialogHandle_7.SetOutput(Translate("ERROR:"), Translate("\n"), var_str_error, Translate("\n"), Translate("---------------------------------------------------------------------------------------------------------------------------------"), Translate("\n"), Translate("SOLUTION:  "), Translate("\n"), var_str_fix);
            dialogHandle_7.ShowOutput(Translate("Entry Error"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
            enabled = 1;
          }
        }
        if (retValueDialog == 1)
        {
          break;
        }
      }
    }
    if (bol_RunWashProtocol == 0)
    {
      TrcTrace(Translate("================  Profile Selected:  "), profile_selected);
      TrcTrace(Translate("                  Filter Plate Height:  "), filterPlateHeight);
      TrcTrace(Translate("                  Nozzle Height:  "), nozzleHeight);
      TrcTrace(Translate("                  Collection Plate Height:  "), collectionPlateHeight);
      TrcTrace(Translate("                  Offset From Nozzles Height:  "), offsetFromNozzles);
      TrcTrace(Translate("                  Stack Height:  "), var_flo_stack_height);
      if (var_int_create_new_profile == 1)
      {
        File_Read.AddField("N", var_int_last_entry, hslInteger);
        if( 0 == File_Read.Open(mpe_parameter_file + " " + "PARAMETERS$", hslRead, "SELECT COUNT(*) AS N FROM [PARAMETERS$]") )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, mpe_parameter_file, "HxMetEdCompCmd");
        }
        if( 0 == File_Read.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 != File_Read.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        File_Read.RemoveFields();
        var_int_entry = var_int_last_entry + 1;
        File_Update.AddField("ENTRY", var_int_entry, hslInteger);
        File_Update.AddField("LAST_UPDATED", var_str_date, hslString, 255);
        File_Update.AddField("SET_NAME", var_str_set_name, hslString, 255);
        File_Update.AddField("FILTER_PLATE_NAME", var_str_filter_plate, hslString, 255);
        File_Update.AddField("COLLECTION_PLATE_NAME", var_str_collection_plate, hslString, 255);
        File_Update.AddField("FILTER_HEIGHT", filterPlateHeight, hslFloat);
        File_Update.AddField("NOZZLE_HEIGHT", nozzleHeight, hslFloat);
        File_Update.AddField("COLLECTION_PLATE_HEIGHT", collectionPlateHeight, hslFloat);
        File_Update.AddField("OFFSET_FROM_NOZZLES", offsetFromNozzles, hslFloat);
        File_Update.AddField("STACK_HEIGHT", var_flo_stack_height, hslFloat);
        if( 0 == File_Update.Open(mpe_parameter_file + " " + "PARAMETERS$", hslAppend) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, mpe_parameter_file, "HxMetEdCompCmd");
        }
        if( 0 == File_Update.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 != File_Update.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        File_Update.RemoveFields();
      }
      update_sql = StrConcat12(Translate("UPDATE [PARAMETERS$] SET FILTER_HEIGHT = "), filterPlateHeight, Translate(", NOZZLE_HEIGHT = "), nozzleHeight, Translate(", COLLECTION_PLATE_HEIGHT = "), collectionPlateHeight, Translate(", OFFSET_FROM_NOZZLES = "), offsetFromNozzles, Translate(", STACK_HEIGHT = "), var_flo_stack_height, Translate(", LAST_UPDATED = '"), var_str_date);
      update_sql = StrConcat4(update_sql, Translate("', TIME_UPDATED = '"), var_str_time, Translate("'"));
      update_sql = StrConcat4(update_sql, Translate(" WHERE ENTRY = "), var_int_entry, Translate(""));
      if( 0 == File_Update.Open(mpe_parameter_file + " " + "PARAMETERS$", hslRead, update_sql) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, mpe_parameter_file, "HxMetEdCompCmd");
      }
      if( 0 != File_Update.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      File_Update.RemoveFields();
    }
    HSLMPELib::IsInitialized(MPE2, bol_MPEInitialized);
    if (bol_MPEInitialized == 0)
    {
      customDialog_8.InitCustomDialog("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");
      customDialog_8.ShowCustomDialog();
      retValueDialog = customDialog_8.GetCustomDialogProperty( "ReturnValue" );
      Initialize_MPE();
    }
    if (bol_RunWashProtocol == 0)
    {
      log_folder_path = FilGetLogFilesPath();
      unique_run_id = Util::GetUniqueRunId();
      Date_ID = TimGetFormattedDate(Translate("%Y%m%d"));
      Time_ID = TimGetFormattedTime(Translate("%H%M"));
      var_str_date_time = StrConcat4(Date_ID, Translate("_"), Time_ID, Translate(""));
      report_file = StrConcat8(log_folder_path, Translate("\\"), var_str_date_time, Translate("_MPE2_Development_Results"), Translate(".xls"), Translate(""), Translate(""), Translate(""));
      File_Create.AddField("FILTER_PLATE_NAME", var_str_filter_plate, hslString, 255);
      File_Create.AddField("COLLECTION_PLATE_NAME", var_str_collection_plate, hslString, 255);
      File_Create.AddField("FILTER_HEIGHT", filterPlateHeight, hslFloat);
      File_Create.AddField("NOZZLE_HEIGHT", nozzleHeight, hslFloat);
      File_Create.AddField("COLLECTION_PLATE_HEIGHT", collectionPlateHeight, hslFloat);
      File_Create.AddField("OFFSET_FROM_NOZZLES", offsetFromNozzles, hslFloat);
      File_Create.AddField("STACK_HEIGHT", var_flo_stack_height, hslFloat);
      if( 0 == File_Create.Open(report_file + " " + "Definitions", hslWrite) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, report_file, "HxMetEdCompCmd");
      }
      if( 0 == File_Create.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 != File_Create.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      File_Create.RemoveFields();
      File_Create.AddField("TIME", var_str_time, hslString, 255);
      File_Create.AddField("PROCESS_STEP", var_str_process_desc, hslString, 255);
      File_Create.AddField("VOLUME", var_flo_volume, hslFloat);
      File_Create.AddField("COMMAND_STRING", var_str_process, hslString, 255);
      File_Create.AddField("PROCESS_TO", var_str_process_location, hslString, 255);
      File_Create.AddField("LIQUID_NOTES", var_str_liquid_notes, hslString, 255);
      File_Create.AddField("PROCESS_SUCCESSFUL", var_str_process_success, hslString, 255);
      File_Create.AddField("OBSERVATIONS", var_str_observations, hslString, 255);
      if( 0 == File_Create.Open(report_file + " " + "Test_Results", hslWrite) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, report_file, "HxMetEdCompCmd");
      }
      Finish_Method_Visible = 0;
      {
        Test_Count = 0;
        while (1 == 1)
        {
          Test_Count = Test_Count + 1;
          Parallel_Vacuum = 0;
          {
            while (1 == 1)
            {
              var_str_time = TimGetFormattedTime(Translate("%H:%M"));
              if (retValueDialog == 1)
              {
                var_str_process_desc = Translate("Sample Addition");
                var_flo_volume = 100;
                var_int_process_to_waste = 1;
                var_str_process = Translate("");
                if (Test_Count > 1)
                {
                  Finish_Method_Visible = 1;
                }
                customDialog_12.InitCustomDialog("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");
                customDialog_12.SetCustomDialogProperty( "comboBox1.Text", var_str_process_desc );
                customDialog_12.SetCustomDialogProperty( "numeric1.Value", var_flo_volume );
                customDialog_12.SetCustomDialogProperty( "radioButton1.IsChecked", var_int_process_to_waste );
                customDialog_12.SetCustomDialogProperty( "radioButton2.IsChecked", var_int_process_to_collection );
                customDialog_12.SetCustomDialogProperty( "button2.IsVisible", Finish_Method_Visible );
                customDialog_12.SetCustomDialogProperty( "Vacuum_Pre.IsChecked", bol_PreVacuum );
                customDialog_12.SetCustomDialogProperty( "Vacuum_Pre.IsEnabled", var_int_process_to_waste );
                customDialog_12.SetCustomDialogProperty( "Vacuum_Post.IsEnabled", var_int_process_to_waste );
                customDialog_12.SetCustomDialogProperty( "Vacuum_Post.IsChecked", bol_PostVacuum );
                customDialog_12.SetCustomDialogProperty( "Vacuum_Excessive.IsEnabled", var_int_process_to_waste );
                customDialog_12.SetCustomDialogProperty( "PreVacTime.IsEnabled", bol_PreVacuum );
                customDialog_12.SetCustomDialogProperty( "PostVacTime.IsEnabled", bol_PostVacuum );
                customDialog_12.ShowCustomDialog();
                retValueDialog = customDialog_12.GetCustomDialogProperty( "ReturnValue" );
                var_str_process_desc = customDialog_12.GetCustomDialogProperty( "comboBox1.Text" );
                var_flo_volume = customDialog_12.GetCustomDialogProperty( "numeric1.Value" );
                var_str_liquid_notes = customDialog_12.GetCustomDialogProperty( "textBox1.Text" );
                var_int_process_to_waste = customDialog_12.GetCustomDialogProperty( "radioButton1.IsChecked" );
                bol_PreVacuum = customDialog_12.GetCustomDialogProperty( "Vacuum_Pre.IsChecked" );
                bol_PostVacuum = customDialog_12.GetCustomDialogProperty( "Vacuum_Post.IsChecked" );
                bol_ExcessiveVaccumCheck = customDialog_12.GetCustomDialogProperty( "Vacuum_Excessive.IsChecked" );
                int_PreVacTime = customDialog_12.GetCustomDialogProperty( "PreVacTime.Value" );
                int_PostVacTime = customDialog_12.GetCustomDialogProperty( "PostVacTime.Value" );
                if (bol_ExcessiveVaccumCheck == 1)
                {
                  bol_ExcessiveVaccumCheck = 1;
                }
                else
                {
                  bol_ExcessiveVaccumCheck = 0;
                }
                if (retValueDialog == 3)
                {
                  break;
                }
                if (var_int_process_to_waste == 1)
                {
                  var_str_process_location = Translate("WASTE");
                }
                else
                {
                  var_str_process_location = Translate("COLLECTION");
                }
                count_sql = StrConcat8(Translate("SELECT COUNT(*) AS N FROM [PREVIOUS_SETTINGS$] WHERE SET_NAME = '"), profile_selected, Translate("' AND DESTINATION = '"), var_str_process_location, Translate("'"), Translate(""), Translate(""), Translate(""));
                Profile_Check.AddField("N", profile_exists, hslInteger);
                if( 0 == Profile_Check.Open(mpe_parameter_file + " " + "PREVIOUS_SETTINGS$", hslRead, count_sql) )
                {
                      MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, mpe_parameter_file, "HxMetEdCompCmd");
                }
                if( 0 == Profile_Check.ReadRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                if( 0 != Profile_Check.Close() )
                {
                      MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                Profile_Check.RemoveFields();
                if (profile_exists > 0)
                {
                  MECC::TraceComment(Translate("----------------------------------------  Save Settings Found"));
                  save_sample_addition = Translate("");
                  save_wash = Translate("");
                  save_dry = Translate("");
                  save_elution = Translate("");
                  save_other = Translate("");
                  filter_sql = StrConcat8(Translate("SELECT ["), var_str_process_desc, Translate("] FROM [PREVIOUS_SETTINGS$] WHERE SET_NAME = '"), profile_selected, Translate("' AND DESTINATION = '"), var_str_process_location, Translate("'"), Translate(""));
                  Trace(filter_sql);
                  Previous_Settings.AddField(var_str_process_desc, var_str_process, hslString, 255);
                  if( 0 == Previous_Settings.Open(mpe_parameter_file + " " + "PREVIOUS_SETTINGS$", hslRead, filter_sql) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, mpe_parameter_file, "HxMetEdCompCmd");
                  }
                  if( 0 == Previous_Settings.ReadRecord() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  if( 0 != Previous_Settings.Close() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  Previous_Settings.RemoveFields();
                }
              }
              TrcTrace(Translate("             Liquid Notes:  "), Translate(""));
              if (var_int_process_to_waste == 1)
              {
                TrcTrace8(Translate("      "), var_flo_volume, Translate(" uL at "), var_str_process_desc, Translate(" step"), Translate(" to waste"), Translate(""), Translate(""));
                var_str_process_location = Translate("WASTE");
                if (Parallel_Vacuum == 0)
                {
                  Parallel_Vacuum = Fork_Join::ForkThread(Translate("Establish_Vacuum"));
                }
              }
              else
              {
                TrcTrace8(Translate("      "), var_flo_volume, Translate(" uL at "), var_str_process_desc, Translate(" step"), Translate(" to collection"), Translate(""), Translate(""));
                var_str_process_location = Translate("COLLECTION");
              }
              TrcTrace(Translate("      Notes:  "), var_str_liquid_notes);
              TrcTrace(Translate(""), Translate(""));
              ret_value_back = Set_Process_Filter(var_str_process, Processing_Time);
              if (ret_value_back == 1)
              {
                break;
              }
            }
          }
          if (retValueDialog == 3)
          {
            break;
          }
          TrcTrace(Translate("********************  Process Command String:  "), var_str_process);
          Filter_Plate(1, var_int_process_to_waste);
          if (var_int_process_to_waste == 1)
          {
            Fork_Join::JoinThread(Parallel_Vacuum);
            MECC::TraceComment(Translate("[\\\\\\\\\\\\\\\\\\\\] Process filter plate to waste"));
            int_DetermineVacuumTime = 10;
            if (bol_PreVacuum == 1)
            {
              MECC::TraceComment(Translate("--------------------------------[-] Pre-Vacuum..."));
              HSLMPELib::StartVacuum(MPE2, wasteContainer, int_DetermineVacuumTime, bol_ExcessiveVaccumCheck);
              if( 0 == PreVac_Timer.SetTimer(int_PreVacTime) )
              {
                    MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              if( 0 == PreVac_Timer.WaitTimer(hslTrue, hslTrue) )
              {
                    MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              HSLMPELib::StopVacuum(MPE2);
            }
            Init_Dialog = Fork_Join::ForkThread(Translate("_Processing_Dialog"));
            if (bol_PostVacuum == 0)
            {
              bol_ReturnPlate = 1;
            }
            else
            {
              bol_ReturnPlate = 0;
            }
            MPE_Success = HSLMPELib::ProcessFilterToWasteContainer(MPE2, var_str_process, bol_ReturnPlate, wasteContainer, bol_ExcessiveVaccumCheck);
            if (bol_PostVacuum == 1)
            {
              MECC::TraceComment(Translate("--------------------------------[-] Post-Vacuum..."));
              HSLMPELib::StartVacuum(MPE2, wasteContainer, int_DetermineVacuumTime, bol_ExcessiveVaccumCheck);
              if( 0 == PostVac_Timer.SetTimer(int_PostVacTime) )
              {
                    MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              if( 0 == PostVac_Timer.WaitTimer(hslTrue, hslTrue) )
              {
                    MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              HSLMPELib::StopVacuum(MPE2);
              HSLMPELib::RetrieveFilterPlate(MPE2);
            }
            Fork_Join::JoinThread(Init_Dialog);
          }
          else
          {
            MECC::TraceComment(Translate("[\\\\\\\\\\\\\\\\\\\\] Process filter plate to collection"));
            Collection_Plate(1);
            Init_Dialog = Fork_Join::ForkThread(Translate("_Processing_Dialog"));
            MPE_Success = HSLMPELib::ProcessFilterToCollectionPlate(MPE2, var_str_process, 0);
            Fork_Join::JoinThread(Init_Dialog);
            Collection_Plate(0);
            MPE_Success = HSLMPELib::RetrieveFilterPlate(MPE2);
          }
          Filter_Plate(0, var_int_process_to_waste);
          customDialog_16.InitCustomDialog("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");
          customDialog_16.ShowCustomDialog();
          retValueDialog = customDialog_16.GetCustomDialogProperty( "ReturnValue" );
          var_str_process_success = customDialog_16.GetCustomDialogProperty( "comboBox1.Text" );
          var_str_observations = customDialog_16.GetCustomDialogProperty( "textBox1.Text" );
          TrcTrace(Translate("           Was the process successful: "), var_str_process_success);
          TrcTrace(Translate("           Observations: "), var_str_observations);
          if( 0 == File_Create.WriteRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if (var_str_process_success == "Yes")
          {
            if (var_int_process_to_waste == 1)
            {
              var_str_process_location = Translate("WASTE");
            }
            else
            {
              var_str_process_location = Translate("COLLECTION");
            }
            count_sql = StrConcat8(Translate("SELECT COUNT(*) AS N FROM [PREVIOUS_SETTINGS$] WHERE SET_NAME = '"), profile_selected, Translate("' AND DESTINATION = '"), var_str_process_location, Translate("' AND ["), var_str_process_desc, Translate("] = '"), var_str_process);
            count_sql = StrConcat2(count_sql, Translate("'"));
            Profile_Check.AddField("N", profile_exists, hslInteger);
            if( 0 == Profile_Check.Open(mpe_parameter_file + " " + "PREVIOUS_SETTINGS$", hslRead, count_sql) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, mpe_parameter_file, "HxMetEdCompCmd");
            }
            if( 0 == Profile_Check.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if( 0 != Profile_Check.Close() )
            {
                  MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            Profile_Check.RemoveFields();
            if (profile_exists == 0)
            {
              process_save = StrConcat4(var_str_process_desc, Translate(" to "), var_str_process_location, Translate(""));
              customDialog_14.InitCustomDialog("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");
              customDialog_14.SetCustomDialogProperty( "textBlock6.Text", process_save );
              customDialog_14.SetCustomDialogProperty( "textBlock7.Text", var_flo_volume );
              customDialog_14.SetCustomDialogProperty( "textBlock8.Text", var_str_process );
              customDialog_14.ShowCustomDialog();
              retValueDialog_Save = customDialog_14.GetCustomDialogProperty( "ReturnValue" );
              if (retValueDialog_Save == 1)
              {
                count_sql = StrConcat8(Translate("SELECT COUNT(*) AS N FROM [PREVIOUS_SETTINGS$] WHERE SET_NAME = '"), profile_selected, Translate("' AND DESTINATION = '"), var_str_process_location, Translate("'"), Translate(""), Translate(""), Translate(""));
                Profile_Check.AddField("N", profile_exists, hslInteger);
                if( 0 == Profile_Check.Open(mpe_parameter_file + " " + "PREVIOUS_SETTINGS$", hslRead, count_sql) )
                {
                      MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, mpe_parameter_file, "HxMetEdCompCmd");
                }
                if( 0 == Profile_Check.ReadRecord() )
                {
                      MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                if( 0 != Profile_Check.Close() )
                {
                      MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                Profile_Check.RemoveFields();
                if (profile_exists == 0)
                {
                  save_sample_addition = Translate("");
                  save_wash = Translate("");
                  save_dry = Translate("");
                  save_elution = Translate("");
                  save_other = Translate("");
                  Update_File.AddField("SET_NAME", var_str_set_name, hslString, 255);
                  Update_File.AddField("DESTINATION", var_str_process_location, hslString, 255);
                  Update_File.AddField("Sample Addition", save_sample_addition, hslString, 255);
                  Update_File.AddField("Wash", save_wash, hslString, 255);
                  Update_File.AddField("Dry", save_dry, hslString, 255);
                  Update_File.AddField("Elution", save_elution, hslString, 255);
                  Update_File.AddField("Other", save_other, hslString, 255);
                  if( 0 == Update_File.Open(mpe_parameter_file + " " + "PREVIOUS_SETTINGS$", hslAppend) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, mpe_parameter_file, "HxMetEdCompCmd");
                  }
                  if( 0 == Update_File.WriteRecord() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  if( 0 != Update_File.Close() )
                  {
                        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  Update_File.RemoveFields();
                }
                save_command = var_str_process;
                update_sql = StrConcat12(Translate("UPDATE [PREVIOUS_SETTINGS$] SET ["), var_str_process_desc, Translate("] = '"), save_command, Translate("' WHERE SET_NAME = '"), profile_selected, Translate("' AND DESTINATION = '"), var_str_process_location, Translate("'"), Translate(""), Translate(""), Translate(""));
                Trace(update_sql);
                if( 0 == Update_File.Open(mpe_parameter_file + " " + "PREVIOUS_SETTINGS$", hslRead, update_sql) )
                {
                      MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, mpe_parameter_file, "HxMetEdCompCmd");
                }
                if( 0 != Update_File.Close() )
                {
                      MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                Update_File.RemoveFields();
              }
            }
          }
          if (retValueDialog == 2)
          {
            break;
          }
          customDialog_15.InitCustomDialog("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");
          customDialog_15.ShowCustomDialog();
          retValueDialog = customDialog_15.GetCustomDialogProperty( "ReturnValue" );
        }
      }
      if( 0 != File_Create.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      File_Create.RemoveFields();
      dialogHandle_13.SetOutput(Translate("The report for the test(s) done has been generated in the following location:  "), Translate("\n\n"), report_file);
      dialogHandle_13.ShowOutput(Translate("Report Generated"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      customDialog_17.InitCustomDialog("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");
      customDialog_17.ShowCustomDialog();
      ret_FlushWasteQuery = customDialog_17.GetCustomDialogProperty( "ReturnValue" );
      if (ret_FlushWasteQuery == 6)
      {
        Waste_Flush();
      }
    }
    else
    {
      Waste_Flush();
    }
    HSLMPELib::Disconnect(MPE2);
  } }
