private function Collection_Plate( variable i_Collection_Plate_Direction ) void ;
private function Connect_to_MPE( variable & o_MPE2_ID ) void ;
private function Establish_Vacuum(  ) void ;
private function Filter_Plate( variable i_Filter_Plate_Direction, variable i_Filter_to_Waste ) void ;
private function Initialize_MPE(  ) void ;
private function Set_Process_Filter( variable & o_cmnd_process_filter_plate, variable & o_process_time ) variable ;
private function Waste_Flush(  ) void ;
private function _Clamping_Dialog(  ) void ;
private function _EXAMPLE_LOGIC(  ) void ;
private function _Init_Dialog(  ) void ;
private function _Processing_Dialog(  ) void ;
private function _StrTokenize( variable strIn, variable strDelimiter, variable & arrTokens[], variable bAttendEmptyTokens ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  HSLMPELib::StopVacuum(MPE2);
  HSLMPELib::Disconnect(MPE2);
}

private function Initialize_MPE(  ) void {
  private dialog dialogHandle_1;
  private variable var_int_return;
  private variable connect;
  private variable Retry_Loop;
  MECC::TraceComment(Translate("==============================  Initialize MPE Start"));
  Var_Int_Simulation = Util::GetSimulationMode();
  {
    Retry_Loop = 0;
    while (1 == 1)
    {
      Retry_Loop = Retry_Loop + 1;
      if (Retry_Loop > 1)
      {
        Connect_to_MPE(MPE2);
      }
      Init_Dialog = Fork_Join::ForkThread(Translate("_Init_Dialog"));
      connect = HSLMPELib::Initialize(MPE2);
      Trace("MPE2 ID:  ", MPE2);
      if (Var_Int_Simulation == 1)
      {
        connect = 0;
      }
      Fork_Join::JoinThread(Init_Dialog);
      if (connect == 0)
      {
        MECC::TraceComment(Translate("---------------------  [MPE]2 Initialization Successful"));
        break;
      }
      dialogHandle_1.SetOutput(Translate("The Hamilton failed to initialize the MPE!!!"), Translate("\n\n"), Translate("Check the MPE to verify it is connected and there isn't anything blocking its movements. "), Translate("\n\n"), Translate("Press RETRY to try to initialize again or CANCEL to abort."));
      var_int_return = dialogHandle_1.ShowOutput(Translate("Initialization Failed"), hslRetryCancel | hslError | hslDefButton1, hslInfinite);
      if (var_int_return == 2)
      {
        MECC::TraceComment(Translate("*************************  Method ABORTED -----------  Failed  Initialize_MPE"));
        abort;
      }
      HSLMPELib::Disconnect(MPE2);
    }
  }
  MECC::TraceComment(Translate("==============================  Initialize MPE Finish"));
}

private function _Init_Dialog(  ) void {
  private dialog dialogHandle_2;
  Var_Int_Simulation = Util::GetSimulationMode();
  Initialization_Time = 40;
  TrcTrace4(Translate("                        "), Translate("Initialization Time:  "), Initialization_Time, Translate(" seconds"));
  if (Var_Int_Simulation == 1)
  {
    Initialization_Time = 1;
  }
  dialogHandle_2.SetOutput(Translate("Initilizing [MPE]2..."));
  dialogHandle_2.ShowOutput(Translate("Initializing..."), hslOKOnly | hslInformation | hslDefButton1, Initialization_Time);
}

private function Set_Process_Filter( variable & o_cmnd_process_filter_plate, variable & o_process_time ) variable {
  private dialog customDialog_3;
  private variable var_flo_how_much;
  private variable var_str_action;
  private variable var_int_how_long;
  private variable command_index;
  private variable arr_action[];
  private variable arr_how_long[];
  private variable arr_how_much[];
  private variable command_index2;
  private variable var_int_continue_visible;
  private variable var_int_add_visible;
  private variable var_int_back_visible;
  private variable loop_number;
  private variable num_commands;
  private variable index;
  private variable current_command;
  private variable arr_commands[];
  private variable arr_steps[];
  private variable action_index;
  private variable arr_index_compare[];
  private variable units;
  private variable ret_value;
  private variable display_command;
  private variable remaining_commands;
  private variable loopCounter_1;
  private variable var_int_idle;
  private variable var_int_flow;
  private variable var_int_pressure;
  private variable retValueDialog_Command;
  private dialog customDialog_4;
  private variable Back_Option_Visible;
  private variable type;
  o_process_time = 0;
  ret_value = 0;
  o_process_time = 0;
  Back_Option_Visible = 1;
  if (retValueDialog != 1)
  {
    Back_Option_Visible = 0;
  }
  var_str_action = Translate("Pressure");
  var_flo_how_much = 40;
  var_int_how_long = 10;
  action_index = 1;
  arr_index_compare.SetSize(3);
  arr_index_compare.SetAt(1-1, Translate("pressure"));
  arr_index_compare.SetAt(2-1, Translate("flow"));
  arr_index_compare.SetAt(3-1, Translate("idle"));
  arr_action.SetSize(11);
  arr_how_much.SetSize(11);
  arr_how_long.SetSize(11);
  arr_action.SetAt(1-1, var_str_action);
  arr_how_much.SetAt(1-1, var_flo_how_much);
  arr_how_long.SetAt(1-1, var_int_how_long);
  arr_commands.SetSize(0);
  _StrTokenize(o_cmnd_process_filter_plate, Translate(";"), arr_commands, 0);
  Util2::Debug::TraceArray(Translate("Array of Existing Commands"), arr_commands);
  num_commands=arr_commands.GetSize();
  {
    for(index = 0; index < num_commands;)
    {
      index = index + 1;
      current_command=arr_commands.GetAt(index-1);
      arr_steps.SetSize(0);
      _StrTokenize(current_command, Translate(","), arr_steps, 0);
      var_str_action=arr_steps.GetAt(1-1);
      var_str_action = StrMakeLower(var_str_action);
      var_flo_how_much=arr_steps.GetAt(2-1);
      var_int_how_long=arr_steps.GetAt(3-1);
      arr_action.SetAt(index-1, var_str_action);
      arr_how_much.SetAt(index-1, var_flo_how_much);
      arr_how_long.SetAt(index-1, var_int_how_long);
    }
  }
  {
    for(command_index = 0; command_index < 9;)
    {
      command_index = command_index + 1;
      var_int_pressure = 0;
      var_int_flow = 0;
      var_int_idle = 0;
      remaining_commands = 8;
      current_command = 1;
      units = Translate("psi");
      display_command = Translate("");
      if (num_commands > 0)
      {
        command_index = num_commands + 1;
        num_commands = 0;
      }
      Trace("Command Index:  ", command_index);
      if (command_index == 1)
      {
        o_cmnd_process_filter_plate = Translate("");
      }
      if (command_index > 1)
      {
        loop_number = command_index - 1;
        o_cmnd_process_filter_plate = Translate("");
        o_process_time = 0;
        {
          for(command_index2 = 0; command_index2 < loop_number;)
          {
            command_index2 = command_index2 + 1;
            if (command_index2 > 1)
            {
              display_command = StrConcat2(display_command, Translate("\n"));
            }
            var_str_action=arr_action.GetAt(command_index2-1);
            var_str_action = StrMakeLower(var_str_action);
            if (var_str_action == "pressure")
            {
              units = Translate("psi");
            }
            if (var_str_action == "flow")
            {
              units = Translate("L/min");
            }
            if (var_str_action == "idle")
            {
              units = Translate("");
            }
            Util::Lookup(arr_index_compare, var_str_action, action_index);
            action_index = action_index + 1;
            var_flo_how_much=arr_how_much.GetAt(command_index2-1);
            var_int_how_long=arr_how_long.GetAt(command_index2-1);
            o_cmnd_process_filter_plate = StrConcat8(o_cmnd_process_filter_plate, var_str_action, Translate(","), var_flo_how_much, Translate(","), var_int_how_long, Translate(";"), Translate(""));
            display_command = StrConcat12(display_command, current_command, Translate(".  "), var_str_action, Translate(", "), var_flo_how_much, Translate(" "), units, Translate(", "), var_int_how_long, Translate(" seconds"), Translate(""));
            remaining_commands = remaining_commands - 1;
            current_command = current_command + 1;
            type = StrGetType(var_int_how_long);
            if (type == "s")
            {
              var_int_how_long = StrIVal(var_int_how_long);
            }
            o_process_time = o_process_time + var_int_how_long;
          }
        }
      }
      {
        for(loopCounter_1 = 0; loopCounter_1 < remaining_commands;)
        {
          loopCounter_1 = loopCounter_1 + 1;
          if (current_command > 1)
          {
            display_command = StrConcat2(display_command, Translate("\n"));
          }
          display_command = StrConcat12(display_command, current_command, Translate(".  "), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          current_command = current_command + 1;
        }
      }
      var_int_back_visible = 0;
      var_int_add_visible = 0;
      var_int_continue_visible = 1;
      if (command_index == 1)
      {
        var_int_continue_visible = 0;
      }
      if (command_index > 1)
      {
        var_int_back_visible = 1;
      }
      if (command_index < 9)
      {
        var_int_add_visible = 1;
      }
      if (action_index == 1)
      {
        var_int_pressure = 1;
      }
      if (action_index == 2)
      {
        var_int_flow = 1;
      }
      if (action_index == 3)
      {
        var_int_idle = 1;
      }
      customDialog_3.InitCustomDialog("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");
      customDialog_3.SetCustomDialogProperty( "textBlock3.Text", display_command );
      customDialog_3.SetCustomDialogProperty( "Action_Return.SelectedIndex", action_index );
      customDialog_3.SetCustomDialogProperty( "numeric1.Value", var_flo_how_much );
      customDialog_3.SetCustomDialogProperty( "numeric2.Value", var_int_how_long );
      customDialog_3.SetCustomDialogProperty( "button1.IsVisible", var_int_add_visible );
      customDialog_3.SetCustomDialogProperty( "button2.IsVisible", Back_Option_Visible );
      customDialog_3.SetCustomDialogProperty( "button3.IsVisible", var_int_back_visible );
      customDialog_3.SetCustomDialogProperty( "button4.IsVisible", var_int_back_visible );
      customDialog_3.SetCustomDialogProperty( "Pressure.IsChecked", var_int_pressure );
      customDialog_3.SetCustomDialogProperty( "Flow.IsChecked", var_int_flow );
      customDialog_3.SetCustomDialogProperty( "Idle.IsChecked", var_int_idle );
      customDialog_3.SetCustomDialogProperty( "How_Much_Desc.Text", units );
      customDialog_3.ShowCustomDialog();
      retValueDialog_Command = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
      var_str_action = customDialog_3.GetCustomDialogProperty( "Action_Return.Text" );
      action_index = customDialog_3.GetCustomDialogProperty( "Action_Return.SelectedIndex" );
      var_flo_how_much = customDialog_3.GetCustomDialogProperty( "numeric1.Value" );
      var_int_how_long = customDialog_3.GetCustomDialogProperty( "numeric2.Value" );
      if (retValueDialog_Command == 10)
      {
        return (ret_value);
      }
      if (retValueDialog_Command == 1)
      {
        customDialog_4.InitCustomDialog("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");
        customDialog_4.SetCustomDialogProperty( "textBlock3.Text", display_command );
        customDialog_4.ShowCustomDialog();
        retValueDialog_Command = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
        if (retValueDialog_Command == 6)
        {
          break;
        }
      }
      arr_action.SetAt(command_index-1, var_str_action);
      arr_how_much.SetAt(command_index-1, var_flo_how_much);
      arr_how_long.SetAt(command_index-1, var_int_how_long);
      o_cmnd_process_filter_plate = Translate("");
      {
        for(command_index2 = 0; command_index2 < command_index;)
        {
          command_index2 = command_index2 + 1;
          var_str_action=arr_action.GetAt(command_index2-1);
          var_str_action = StrMakeLower(var_str_action);
          var_flo_how_much=arr_how_much.GetAt(command_index2-1);
          var_int_how_long=arr_how_long.GetAt(command_index2-1);
          o_cmnd_process_filter_plate = StrConcat8(o_cmnd_process_filter_plate, var_str_action, Translate(","), var_flo_how_much, Translate(","), var_int_how_long, Translate(";"), Translate(""));
        }
      }
      if (retValueDialog_Command == 2)
      {
        command_index = command_index - 2;
      }
      if (retValueDialog_Command == 7)
      {
        command_index = command_index - 1;
      }
    }
  }
  ret_value = 1;
  return (ret_value);
}

private function Filter_Plate( variable i_Filter_Plate_Direction, variable i_Filter_to_Waste ) void {
  private dialog customDialog_5;
  private dialog customDialog_6;
  private variable clamp_error_message;
  private dialog dialogHandle_7;
  if (i_Filter_Plate_Direction == 1)
  {
    customDialog_6.InitCustomDialog("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");
    customDialog_6.SetCustomDialogProperty( "textBlock1.Text", var_str_filter_plate );
    customDialog_6.ShowCustomDialog();
    retValueDialog = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
    HSLMPELib::FilterPlatePlaced(MPE2, filterPlateHeight, nozzleHeight);
    if (i_Filter_to_Waste == 0)
    {
      Init_Dialog = Fork_Join::ForkThread(Translate("_Clamping_Dialog"));
      MECC::TraceComment(Translate("[\\\\\\\\\\\\\\\\\\\\] Clamp filter Plate"));
      MPE_Success = HSLMPELib::ClampFilterPlate(MPE2);
      Fork_Join::JoinThread(Init_Dialog);
    }
    if (MPE_Success == 1)
    {
      HSLMPELib::GetLastError(MPE2, clamp_error_message);
      dialogHandle_7.SetOutput(Translate("An error has occurred while attempting to clamp the filter plate.  See a description of the error below:"), Translate("\n\n"), clamp_error_message, Translate("\n\n"), Translate("The method cannot proceed after this error, so the method will abort."));
      dialogHandle_7.ShowOutput(Translate("An error occured!"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
      abort;
    }
  }
  if (i_Filter_Plate_Direction == 0)
  {
    customDialog_5.InitCustomDialog("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");
    customDialog_5.SetCustomDialogProperty( "textBlock1.Text", var_str_filter_plate );
    customDialog_5.ShowCustomDialog();
    retValueDialog = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
    HSLMPELib::FilterPlateRemoved(MPE2);
  }
}

private function Collection_Plate( variable i_Collection_Plate_Direction ) void {
  private dialog customDialog_8;
  private dialog customDialog_9;
  if (i_Collection_Plate_Direction == 1)
  {
    customDialog_8.InitCustomDialog("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");
    customDialog_8.SetCustomDialogProperty( "textBlock1.Text", var_str_collection_plate );
    customDialog_8.ShowCustomDialog();
    retValueDialog = customDialog_8.GetCustomDialogProperty( "ReturnValue" );
    HSLMPELib::CollectionPlatePlaced(MPE2, collectionPlateHeight, offsetFromNozzles);
  }
  if (i_Collection_Plate_Direction == 0)
  {
    customDialog_9.InitCustomDialog("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");
    customDialog_9.SetCustomDialogProperty( "textBlock1.Text", var_str_collection_plate );
    customDialog_9.ShowCustomDialog();
    retValueDialog = customDialog_9.GetCustomDialogProperty( "ReturnValue" );
    HSLMPELib::CollectionPlateRemoved(MPE2);
  }
}

private function _EXAMPLE_LOGIC(  ) void {
  private dialog dialogHandle_10;
  private dialog dialogHandle_11;
  private dialog dialogHandle_12;
  private dialog dialogHandle_13;
  private dialog dialogHandle_14;
  private variable InParameters;
  private variable connect;
  filterPlateHeight = 15.1;
  nozzleHeight = 38.1;
  wasteContainer = 0;
  collectionPlateHeight = 43.7;
  offsetFromNozzles = 2;
  InParameters = Translate("pressure,40,10");
  HSLMPELib::ConnectUsingCOM(6, 921600, 1, MPE2);
  connect = HSLMPELib::Initialize(MPE2);
  dialogHandle_13.SetOutput(Translate("Place a filter plate in the upper plate nest of the MPE module."));
  dialogHandle_13.ShowOutput(Translate("Place filter plate"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  HSLMPELib::FilterPlatePlaced(MPE2, filterPlateHeight, nozzleHeight);
  dialogHandle_11.SetOutput(Translate("The filter plate is about to be clamped. Please make sure that your hands are clear of the device."));
  dialogHandle_11.ShowOutput(Translate("About to clamp filter plate"), hslOKOnly | hslQuestion | hslDefButton1, hslInfinite);
  HSLMPELib::ClampFilterPlate(MPE2);
  HSLMPELib::ProcessFilterToWasteContainer(MPE2, InParameters, wasteContainer, 1, 0);
  dialogHandle_14.SetOutput(Translate("Place a collection plate in the plate nest of the MPE module."));
  dialogHandle_14.ShowOutput(Translate("Place collection plate"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  HSLMPELib::CollectionPlatePlaced(MPE2, collectionPlateHeight, offsetFromNozzles);
  HSLMPELib::ProcessFilterToCollectionPlate(MPE2, InParameters, 0);
  dialogHandle_12.SetOutput(Translate("Remove the collection plate."));
  dialogHandle_12.ShowOutput(Translate("Remove Collection Plate"), hslOKOnly | hslQuestion | hslDefButton1, hslInfinite);
  HSLMPELib::CollectionPlateRemoved(MPE2);
  HSLMPELib::RetrieveFilterPlate(MPE2);
  dialogHandle_10.SetOutput(Translate("Remove the filter plate."));
  dialogHandle_10.ShowOutput(Translate("Remove Filter Plate"), hslOKOnly | hslQuestion | hslDefButton1, hslInfinite);
  HSLMPELib::FilterPlateRemoved(MPE2);
  HSLMPELib::Disconnect(MPE2);
}

private function _StrTokenize( variable strIn, variable strDelimiter, variable & arrTokens[], variable bAttendEmptyTokens ) void {
  private variable strEdit;
  private variable posLast;
  private variable strToAdd;
  private variable posCurrent;
  posCurrent = -1;
  posLast = -1;
  strToAdd = "";
  strEdit = strIn;
  if( StrGetLength(strEdit) == 0 || StrGetLength(strDelimiter) == 0 )
     return;
  posLast = StrGetLength(strEdit);
  posCurrent = StrFind(strEdit, strDelimiter);
  while (-1 != posCurrent && posLast > 0)
  {
       //get tokens before next delimiter char
       strToAdd = StrLeft(strEdit, posCurrent);
       StrTrimRight(strToAdd, "");
       StrTrimLeft (strToAdd, "");
       //add token to our output list
       if( StrGetLength(strToAdd) > 0 )
       {
            arrTokens.AddAsLast(strToAdd);
            //Trace(GetFunctionName(), " adding string to output list: $", strToAdd, "$", "" );
       }
       else
       {
            if( bAttendEmptyTokens )// empty string should also be added
            {
                 arrTokens.AddAsLast(strToAdd);
                 //Trace(GetFunctionName(), " adding string to output list: $", strToAdd, "$", "" );
            }
       }
       //prepare next loop by removing obsolete characters
       strEdit = StrRight(strEdit, posLast - posCurrent - StrGetLength(strDelimiter) );
       //Trace(GetFunctionName(), " next string = ", strEdit );
       //find next "non-delimiter"
       posCurrent = StrFind(strEdit, strDelimiter);
       posLast = StrGetLength(strEdit);
       //Trace(GetFunctionName(), " next pos = ", posCurrent );
  }//end while
  //no delimiter left
  //add the last part of the string to our output list
  if (-1 == posCurrent)// && posLast > 0
  {
       if( posLast == 0 && !bAttendEmptyTokens )
          return;
       StrTrimRight(strEdit, "");
       StrTrimLeft (strEdit, "");
       //Trace(GetFunctionName(), " no delimiter left - adding string to output list: $", strEdit, "$", "" );
       arrTokens.AddAsLast(strEdit);
  }
}

private function Connect_to_MPE( variable & o_MPE2_ID ) void {
  private variable arr_SuccessBaud[];
  private variable arr_BaudRates[];
  private variable arr_SuccessCOM[];
  private variable Max_COMs;
  private variable com_port;
  private variable baud_rate;
  private file Connection_File;
  private variable current_BaudRate;
  private variable BR_Index;
  private variable num_BaudRates;
  private variable connect_success;
  private variable COM_Port;
  private variable current_COM;
  private variable BaudRate;
  private variable device_ID;
  private variable num_Devices_Found;
  private variable com_port_selected;
  private variable num_Ports;
  private variable current_IP;
  private variable IP_Index;
  private variable num_IPs;
  private variable arr_SuccessIP[];
  private variable arr_SuccessPort[];
  private variable arr_IPs[];
  private variable arr_Ports[];
  private variable current_Port;
  private variable Port_Index;
  private variable Device_Connected;
  private variable port_selected;
  private variable IP;
  private variable device_connections_IP;
  private variable device_connections_COM;
  private variable Port;
  private dialog dialogHandle_15;
  private dialog customDialog_16;
  private dialog customDialog_17;
  private variable var_int_return;
  private variable Connection_Error;
  o_MPE2_ID = 0;
  MECC::TraceComment(Translate("==============================  Connect MPE Start"));
  Var_Int_Simulation = Util::GetSimulationMode();
  {
    while (1 == 1)
    {
      Connection_Error = 0;
      Device_Connected = 0;
      device_connections_COM = StrConcat4(mpe_folder, Translate("COM_CONNECTION"), Translate(".txt"), Translate(""));
      file_exists = HSLExtensions::File::Exists(device_connections_COM);
      if (file_exists == 1)
      {
        Connection_File.AddField("BAUD_RATE", baud_rate, hslInteger);
        Connection_File.AddField("COM_PORT", com_port, hslInteger);
        Connection_File.SetDelimiter(hslCSVDelimited);
        if( 0 == Connection_File.Open(device_connections_COM, hslAppend) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, device_connections_COM, "HxMetEdCompCmd");
        }
        if( 0 == Connection_File.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 != Connection_File.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        Connection_File.RemoveFields();
        Connection_Error = HSLMPELib::ConnectUsingCOM(com_port, baud_rate, Var_Int_Simulation, o_MPE2_ID);
        if (Connection_Error == 1)
        {
          HSLMPELib::Disconnect(o_MPE2_ID);
        }
        else
        {
          Device_Connected = 1;
        }
      }
      device_connections_IP = StrConcat4(mpe_folder, Translate("IP_CONNECTION"), Translate(".txt"), Translate(""));
      file_exists = HSLExtensions::File::Exists(device_connections_IP);
      if (file_exists == 1)
      {
        Connection_File.AddField("IP_ADDRESS", IP, hslString, 255);
        Connection_File.AddField("PORT", Port, hslInteger);
        Connection_File.SetDelimiter(hslCSVDelimited);
        if( 0 == Connection_File.Open(device_connections_IP, hslAppend) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, device_connections_IP, "HxMetEdCompCmd");
        }
        if( 0 == Connection_File.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 != Connection_File.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        Connection_File.RemoveFields();
        Connection_Error = HSLMPELib::ConnectUsingIP(IP, Port, Var_Int_Simulation, o_MPE2_ID);
        if (Connection_Error == 1)
        {
          HSLMPELib::Disconnect(o_MPE2_ID);
        }
        else
        {
          Device_Connected = 1;
        }
      }
      Trace("Is Device Connected:  ", Device_Connected);
      if (Device_Connected == 0)
      {
        MECC::TraceComment(Translate("---------------------------------- Search for connected [MPE]2 "));
        arr_SuccessCOM.SetSize(0);
        arr_SuccessBaud.SetSize(0);
        arr_BaudRates.SetSize(0);
        arr_BaudRates.AddAsLast(921600);
        if(0){
          arr_BaudRates.AddAsLast(460800);
          arr_BaudRates.AddAsLast(230400);
        }
        Max_COMs = 100;
        if (Var_Int_Simulation == 1)
        {
          Max_COMs = 1;
        }
        num_BaudRates=arr_BaudRates.GetSize();
        {
          for(BR_Index = 0; BR_Index < num_BaudRates;)
          {
            BR_Index = BR_Index + 1;
            current_BaudRate=arr_BaudRates.GetAt(BR_Index-1);
            Trace("Now searching with Baud Rate ", current_BaudRate);
            {
              for(current_COM = 0; current_COM < Max_COMs;)
              {
                current_COM = current_COM + 1;
                connect_success = HSLMPELib::ConnectUsingCOM(current_COM, current_BaudRate, Var_Int_Simulation, device_ID);
                HSLMPELib::Disconnect(device_ID);
                if (connect_success == 0)
                {
                  arr_SuccessBaud.AddAsLast(current_BaudRate);
                  arr_SuccessCOM.AddAsLast(current_COM);
                }
              }
            }
          }
        }
        num_Devices_Found=arr_SuccessCOM.GetSize();
        if (num_Devices_Found > 0)
        {
          if (num_Devices_Found == 1)
          {
            BaudRate=arr_SuccessBaud.GetAt(1-1);
            COM_Port=arr_SuccessCOM.GetAt(1-1);
          }
          if (num_Devices_Found > 1)
          {
            customDialog_16.InitCustomDialog("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");
            customDialog_16.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", arr_SuccessCOM );
            customDialog_16.ShowCustomDialog();
            retValueDialog = customDialog_16.GetCustomDialogProperty( "ReturnValue" );
            com_port_selected = customDialog_16.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
            if (retValueDialog == 2)
            {
              abort;
            }
            BaudRate=arr_SuccessBaud.GetAt(com_port_selected-1);
            COM_Port=arr_SuccessCOM.GetAt(com_port_selected-1);
          }
          Connection_Error = HSLMPELib::ConnectUsingCOM(COM_Port, BaudRate, Var_Int_Simulation, o_MPE2_ID);
          if (Connection_Error == 1)
          {
            HSLMPELib::Disconnect(o_MPE2_ID);
          }
          else
          {
            Device_Connected = 1;
            Connection_File.AddField("BAUD_RATE", BaudRate, hslInteger);
            Connection_File.AddField("COM_PORT", COM_Port, hslInteger);
            Connection_File.SetDelimiter(hslCSVDelimited);
            if( 0 == Connection_File.Open(device_connections_COM, hslWrite) )
            {
                  MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, device_connections_COM, "HxMetEdCompCmd");
            }
            if( 0 == Connection_File.WriteRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if( 0 != Connection_File.Close() )
            {
                  MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            Connection_File.RemoveFields();
            HSLMapReport::DeleteFile(device_connections_IP);
          }
        }
        if (Device_Connected == 0)
        {
          arr_SuccessIP.SetSize(0);
          arr_SuccessPort.SetSize(0);
          arr_IPs.SetSize(0);
          arr_IPs.AddAsLast(Translate("192.168.100.100"));
          arr_Ports.SetSize(0);
          arr_IPs.AddAsLast(2000);
          num_IPs=arr_IPs.GetSize();
          num_Ports=arr_Ports.GetSize();
          {
            for(IP_Index = 0; IP_Index < num_IPs;)
            {
              IP_Index = IP_Index + 1;
              current_IP=arr_IPs.GetAt(IP_Index-1);
              Trace("Now searching with IP Address ", current_IP);
              {
                for(Port_Index = 0; Port_Index < num_Ports;)
                {
                  Port_Index = Port_Index + 1;
                  current_Port=arr_Ports.GetAt(Port_Index-1);
                  Trace("Now searching with Port ", current_Port);
                  connect_success = HSLMPELib::ConnectUsingIP(current_IP, current_Port, Var_Int_Simulation, device_ID);
                  HSLMPELib::Disconnect(device_ID);
                  if (connect_success == 0)
                  {
                    arr_SuccessIP.AddAsLast(current_IP);
                    arr_SuccessPort.AddAsLast(current_Port);
                  }
                }
              }
            }
          }
          num_Devices_Found=arr_SuccessIP.GetSize();
          if (num_Devices_Found > 0)
          {
            if (num_Devices_Found == 1)
            {
              IP=arr_SuccessIP.GetAt(1-1);
              Port=arr_SuccessPort.GetAt(1-1);
            }
            if (num_Devices_Found > 1)
            {
              customDialog_17.InitCustomDialog("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");
              customDialog_17.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", arr_SuccessPort );
              customDialog_17.ShowCustomDialog();
              retValueDialog = customDialog_17.GetCustomDialogProperty( "ReturnValue" );
              port_selected = customDialog_17.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
              if (retValueDialog == 2)
              {
                abort;
              }
              IP=arr_SuccessIP.GetAt(port_selected-1);
              Port=arr_SuccessPort.GetAt(port_selected-1);
            }
            Connection_Error = HSLMPELib::ConnectUsingIP(IP, Port, Var_Int_Simulation, o_MPE2_ID);
            if (Connection_Error == 1)
            {
              HSLMPELib::Disconnect(o_MPE2_ID);
            }
            else
            {
              Device_Connected = 1;
              Connection_File.AddField("IP_ADDRESS", IP, hslString, 255);
              Connection_File.AddField("PORT", Port, hslInteger);
              Connection_File.SetDelimiter(hslCSVDelimited);
              if( 0 == Connection_File.Open(device_connections_IP, hslAppend) )
              {
                    MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, device_connections_IP, "HxMetEdCompCmd");
              }
              if( 0 == Connection_File.WriteRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              if( 0 != Connection_File.Close() )
              {
                    MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              Connection_File.RemoveFields();
              HSLMapReport::DeleteFile(device_connections_COM);
            }
          }
        }
      }
      Trace("Is Device Connected:  ", Device_Connected);
      if (Device_Connected == 1)
      {
        Trace("MPE2 ID:  ", o_MPE2_ID);
        break;
      }
      dialogHandle_15.SetOutput(Translate("The Hamilton could not connect to the [MPE]2!"), Translate("\n\n"), Translate("Check the [MPE]2 to verify it is connected and turned on."), Translate("\n\n"), Translate("Press RETRY to try to connect again or CANCEL to abort."));
      var_int_return = dialogHandle_15.ShowOutput(Translate("Failed to Connect"), hslRetryCancel | hslError | hslDefButton1, hslInfinite);
      if (var_int_return == 2)
      {
        MECC::TraceComment(Translate("*************************  Method ABORTED -----------  Failed  Connect_to_MPE"));
        abort;
      }
    }
  }
  MECC::TraceComment(Translate("==============================  Connect MPE Finish"));
}

private function _Clamping_Dialog(  ) void {
  private variable Clamping_Time;
  private dialog dialogHandle_18;
  Var_Int_Simulation = Util::GetSimulationMode();
  Clamping_Time = 5;
  TrcTrace4(Translate("                        "), Translate("Clamping Time:  "), Clamping_Time, Translate(" seconds"));
  if (Var_Int_Simulation == 1)
  {
    Clamping_Time = 1;
  }
  dialogHandle_18.SetOutput(Translate("Clamping filter plate..."));
  dialogHandle_18.ShowOutput(Translate("Clamping..."), hslOKOnly | hslInformation | hslDefButton1, Clamping_Time);
}

private function _Processing_Dialog(  ) void {
  private dialog dialogHandle_19;
  Var_Int_Simulation = Util::GetSimulationMode();
  TrcTrace4(Translate("                        "), Translate("Processing Filter Plate Time:  "), Processing_Time, Translate(" seconds"));
  if (Var_Int_Simulation == 1)
  {
    Processing_Time = 1;
  }
  dialogHandle_19.SetOutput(Translate("Processing plate..."));
  dialogHandle_19.ShowOutput(Translate("Processing..."), hslOKOnly | hslInformation | hslDefButton1, Processing_Time);
}

private function Establish_Vacuum(  ) void {
  private variable bol_VacuumStatus;
  private variable int_EstablishRounds;
  private dialog dialogHandle_20;
  MECC::TraceComment(Translate("-----------------------------------------------[-] Establishing Vacuum in waste container"));
  if (bol_SimulationMode == 0)
  {
    bol_VacuumStatus = 0;
    int_EstablishRounds = 0;
    {
      int_EstablishRounds = 0;
      while (bol_VacuumStatus == 0)
      {
        int_EstablishRounds = int_EstablishRounds + 1;
        if (int_EstablishRounds == 5)
        {
          dialogHandle_20.SetOutput(Translate("The [MPE]2 is having difficulty establishing a vacuum in the waste container."), Translate("\n\n"), Translate("Please verify that the lid is tight and the tubes have been properly connected and the waste container is not full!"));
          dialogHandle_20.ShowOutput(Translate("Verify the Waste Lid"), hslOKOnly | hslQuestion | hslDefButton1, hslInfinite);
          int_EstablishRounds = 1;
        }
        HSLMPELib::StartVacuum(MPE2, wasteContainer, 10, 1);
        HSLMPELib::GetVacuumStatus(MPE2, bol_VacuumStatus);
        HSLMPELib::StopVacuum(MPE2);
      }
    }
  }
  MECC::TraceComment(Translate("-----------------------------------------------[-] Vacuum Established"));
}

private function Waste_Flush(  ) void {
  private dialog customDialog_21;
  private dialog customDialog_22;
  MECC::TraceComment(Translate("=============================== Waste_Flush START"));
  Establish_Vacuum();
  HSLMPELib::StartVacuum(MPE2, wasteContainer, 10, 1);
  customDialog_22.InitCustomDialog("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");
  customDialog_22.ShowCustomDialog();
  ret_FlushWasteQuery = customDialog_22.GetCustomDialogProperty( "ReturnValue" );
  HSLMPELib::StopVacuum(MPE2);
  MECC::TraceComment(Translate("=============================== Waste_Flush FINISH"));
}
