private function A_Definitions(  ) void ;
private function B_Initialise(  ) void ;
private function C_Pipetting(  ) void ;
private function D_Cleanup(  ) void ;
private function _VersionInfo(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  private dialog customDialog_1;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Aborting : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  customDialog_1.InitCustomDialog("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");
  customDialog_1.ShowCustomDialog();
  TrcTrace(Translate("------------------------------------ Recovery method filepath - C:\Program Files (x86)\HAMILTON\Methods\[MPE]2\96head crash recovery.med ------------------------------------"), Translate(""));
  _blnAbortFlag = 1;
  D_Cleanup();
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Aborting : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function B_Initialise(  ) void {
  private variable strReturnValue;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Initialise : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  _blnSimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
  TrcTrace(Translate("_blnSimulationMode = "), _blnSimulationMode);
  if (_blnSimulationMode == 1)
  {
    _intSimulationMode = 1;
  }
  else
  {
    _intSimulationMode = 0;
  }
  MECC::TraceComment(Translate("Init easy pick"));
  if (_blnSimulationMode == 1)
  {
    _strColoniesSettings = Translate("Culture Processing Simulation");
    TrcTrace(Translate("_strColoniesSettings = "), _strColoniesSettings);
  }
  strReturnValue = EASYPICKII_STEPS::easyStep_Init(ML_STAR, EASYPICKII::_TRACE_LEVEL_FULL, EASYPICKII::_HSLTRUE);
  if (strReturnValue != EASYPICKII::ERROR::_NONE)
  {
    EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
    abort;
  }
  MECC::TraceComment(Translate("Request the number of used channels"));
  _intNumberOfChannels = EASYPICKII::HELPER::MLSTAR::GetNumberOfPipettingChannels(ML_STAR);
  _intMaxNumberOfChannelsForPicking = _intNumberOfChannels;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Initialise : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function A_Definitions(  ) void {
  private variable blnSuccess;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Definitions : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  _strFilepathStatus = Translate("C:\\HamiltonOutputFiles\\HamiltonStatus.csv");
  TrcTrace(Translate("_strFilepathStatus = "), _strFilepathStatus);
  blnSuccess = FileDirectoryLib::CheckIfFileExists(_strFilepathStatus);
  if (blnSuccess == 1)
  {
    FileDirectoryLib::DeleteFile(_strFilepathStatus);
  }
  _strTransferPositionGrowthPlate = Translate("PlateHandOff");
  TrcTrace(Translate("_strTransferPositionGrowthPlate = "), _strTransferPositionGrowthPlate);
  _strTransferPositionAgarPlate = Translate("PlateHandOff");
  TrcTrace(Translate("_strTransferPositionAgarPlate = "), _strTransferPositionAgarPlate);
  _strTransferPositionTips300 = Translate("TipsHandOff");
  TrcTrace(Translate("_strTransferPositionTips300 = "), _strTransferPositionTips300);
  _strWastePositionTips1000 = Translate("Tips1000ulHighVolumeTipWithFilter_Waste");
  _strWastePositionTips300 = Translate("Tips300ulStandardVolumeTipWithFilter_Waste");
  _strWastePositionTips50 = Translate("Tips50ulTipWithFilter_Waste");
  _strGrowthPlateName = Translate("GrowthPlate");
  TrcTrace(Translate("_strGrowthPlateName = "), _strGrowthPlateName);
  _strAgarPlateName = Translate("AgarPlate");
  TrcTrace(Translate("_strAgarPlateName = "), _strAgarPlateName);
  _strTips300Name = Translate("Tips300");
  TrcTrace(Translate("_strTips300Name = "), _strTips300Name);
  _blnConfigurationWithDialogs = 0;
  TrcTrace(Translate("_blnConfigurationWithDialogs = "), _blnConfigurationWithDialogs);
  _strLightSource = EASYPICKII::EASYPICKII_HELPER::LIGHTSOURCE::_MLSTAR_DIV3_PWM3;
  TrcTrace(Translate("_strLightSource = "), _strLightSource);
  if(0){
    _strLightSourceTop = EASYPICKII::EASYPICKII_HELPER::LIGHTSOURCE::_MLSTAR_DIV2_PWM1;
    TrcTrace(Translate("_strLightSourceTop = "), _strLightSourceTop);
  }
  _intLightIntensity = 12;
  TrcTrace(Translate("_intLightIntensity = "), _intLightIntensity);
  _blnShowCameraLiveView = EASYPICKII::_HSLFALSE;
  TrcTrace(Translate("_blnShowCameraLiveView = "), _blnShowCameraLiveView);
  _strColoniesSettings = Translate("Culture Processing");
  TrcTrace(Translate("_strColoniesSettings = "), _strColoniesSettings);
  _strAgarPlateDescription = Translate("AgarPlate");
  TrcTrace(Translate("_strAgarPlateDescription = "), _strAgarPlateDescription);
  _strCameraSettings = "Culture Processing";
  TrcTrace(Translate("_strCameraSettings = "), _strCameraSettings);
  _intMaxColoniesPerWell = 12;
  TrcTrace(Translate("_intMaxColoniesPerWell = "), _intMaxColoniesPerWell);
  _arrIntColoniesPerWell.SetSize(0);
  _arrIntColoniesPerWell.AddAsLast(_intMaxColoniesPerWell);
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Definitions : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function C_Pipetting(  ) void {
  private variable blnSuccess;
  private timer tmrSimModeLabwareRequestCompletionFileCreation;
  private variable strTransferPosition;
  private variable strInputTransferPositionLabwareName;
  private variable strInputTransferPositionOccupancy;
  private variable blnInputTransferPositionLabwareRequestComplete;
  private variable intReplaceTips;
  private variable loopCounter1;
  private variable loopCounter3;
  private variable intRackWellsY;
  private variable intTotalNumberOfColonies;
  private variable intRackErrorCode;
  private variable strUsedChannelPattern;
  private variable strRackPictureFilename;
  private variable loopCounterColoniesPickingCycle;
  private variable strChannelPatternForPicking;
  private variable strAspirateStepReturn;
  private variable intNumberOfColoniesForNextCycle;
  private variable strReturnValue;
  private variable intNumberOfPickedColonies;
  private variable intRackWellsX;
  private variable intUsedNumberOfColonies;
  private variable intEasyPickIIRackID;
  private timer tmrDisplayWait;
  private sequence seqColonySequence;
  private variable arrEasyPickColonyPropertyID[];
  private variable arrintChannelToWell[];
  private variable _strAgarPlateID;
  private variable tmp_ReturnValue;
  private dialog customDialog_2;
  private variable loopCounter2;
  private variable intReturnValueDialog;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Pipetting : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  intReplaceTips = TIPHANDLING::CheckAvailableTipsFromDeck(ML_STAR, ML_STAR.Tips300ulStandardVolumeTipWithFilter_Partial, 48, 300);
  TrcTrace(Translate("-----Replace tips  : intReplaceTips = "), intReplaceTips);
  if (intReplaceTips > 0)
  {
    if (intReplaceTips == 1)
    {
      blnSuccess = TIPHANDLING::MoveTipRackWithCOREGrip_ChannelTipsOnly(ML_STAR, ML_STAR.COREGripTool_OnWaste_1000ul_0001, ML_STAR.Tips300ulStandardVolumeTipWithFilter_Partial, ML_STAR.Tips300ulStandardVolumeTipWithFilter_HandOff, 0, 300, 0);
      TrcTrace(Translate("-----Move tip rack with CORE grips : blnSuccess = "), blnSuccess);
      MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
      blnSuccess = LABWAREHANDLING::ReturnLabware(_strTips300Name, _strTransferPositionTips300);
      TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
      if (_blnSimulationMode == 1)
      {
        if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        blnSuccess = LABWAREHANDLING::UtilityCreatLabwareReturnCompletionFile(_strTips300Name, _strTransferPositionTips300);
        TrcTrace(Translate("-----Utility Create Labware Return Completion File  : blnSuccess = "), blnSuccess);
      }
      blnSuccess = LABWAREHANDLING::WaitForLabwareReturnCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
      TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
    }
    if (intReplaceTips == 2)
    {
      blnSuccess = TIPHANDLING::MoveTipRackWithCOREGrip_EmptyRackToWaste(ML_STAR, ML_STAR.COREGripTool_OnWaste_1000ul_0001, ML_STAR.Tips300ulStandardVolumeTipWithFilter_Partial, ML_STAR.Tips300ulStandardVolumeTipWithFilter_Waste, 0);
      TrcTrace(Translate("-----Move tip rack with CORE grips : blnSuccess = "), blnSuccess);
    }
    blnSuccess = LABWAREHANDLING::RequestLabware(_strTips300Name, _strTransferPositionTips300);
    TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
    if (_blnSimulationMode == 1)
    {
      if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      blnSuccess = LABWAREHANDLING::UtilityCreateLabwareRequestCompletionFile(_strTips300Name, _strTransferPositionTips300);
      TrcTrace(Translate("-----Utility Create Labware Request Completion File  : blnSuccess = "), blnSuccess);
    }
    blnSuccess = LABWAREHANDLING::WaitForLabwareRequestCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
    TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
    blnInputTransferPositionLabwareRequestComplete = IF_AND_IF_OR::If_And_3_Variables(strTransferPosition, _strTransferPositionTips300, strInputTransferPositionLabwareName, _strTips300Name, strInputTransferPositionOccupancy, Translate("1"));
    TrcTrace(Translate("-----blnInputTransferPositionLabwareRequestComplete = "), blnInputTransferPositionLabwareRequestComplete);
    if (blnInputTransferPositionLabwareRequestComplete == 0)
    {
      blnSuccess = RUNTIMEERRORHANDLING::TransportError();
      TrcTrace(Translate("-----RunTime error file creation blnSuccess = "), blnSuccess);
      abort;
    }
    blnSuccess = TIPHANDLING::MoveTipRackWithCOREGrip_ChannelTipsOnly(ML_STAR, ML_STAR.COREGripTool_OnWaste_1000ul_0001, ML_STAR.Tips300ulStandardVolumeTipWithFilter_HandOff, ML_STAR.Tips300ulStandardVolumeTipWithFilter_Partial, 0, 300, 1);
    TrcTrace(Translate("-----Move tip rack with CORE grips : blnSuccess = "), blnSuccess);
  }
  MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
  blnSuccess = LABWAREHANDLING::RequestLabware(_strGrowthPlateName, _strTransferPositionGrowthPlate);
  TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
  if (_blnSimulationMode == 1)
  {
    if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    blnSuccess = LABWAREHANDLING::UtilityCreateLabwareRequestCompletionFile(_strGrowthPlateName, _strTransferPositionGrowthPlate);
    TrcTrace(Translate("-----Utility Create Labware Request Completion File  : blnSuccess = "), blnSuccess);
  }
  blnSuccess = LABWAREHANDLING::WaitForLabwareRequestCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
  TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
  blnInputTransferPositionLabwareRequestComplete = IF_AND_IF_OR::If_And_3_Variables(strTransferPosition, _strTransferPositionGrowthPlate, strInputTransferPositionLabwareName, _strGrowthPlateName, strInputTransferPositionOccupancy, Translate("1"));
  TrcTrace(Translate("-----blnInputTransferPositionLabwareRequestComplete = "), blnInputTransferPositionLabwareRequestComplete);
  if (blnInputTransferPositionLabwareRequestComplete == 0)
  {
    blnSuccess = RUNTIMEERRORHANDLING::TransportError();
    TrcTrace(Translate("-----RunTime error file creation blnSuccess = "), blnSuccess);
    abort;
  }
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  {
    for(loopCounter1 = 0; loopCounter1 < 4;)
    {
      loopCounter1 = loopCounter1 + 1;
      MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
      blnSuccess = LABWAREHANDLING::RequestLabware(_strAgarPlateName, _strTransferPositionAgarPlate);
      TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
      if (_blnSimulationMode == 1)
      {
        if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        blnSuccess = LABWAREHANDLING::UtilityCreateLabwareRequestCompletionFile(_strAgarPlateName, _strTransferPositionAgarPlate);
        TrcTrace(Translate("-----Utility Create Labware Request Completion File  : blnSuccess = "), blnSuccess);
      }
      blnSuccess = LABWAREHANDLING::WaitForLabwareRequestCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
      TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
      blnInputTransferPositionLabwareRequestComplete = IF_AND_IF_OR::If_And_3_Variables(strTransferPosition, _strTransferPositionAgarPlate, strInputTransferPositionLabwareName, _strAgarPlateName, strInputTransferPositionOccupancy, Translate("1"));
      TrcTrace(Translate("-----blnInputTransferPositionLabwareRequestComplete = "), blnInputTransferPositionLabwareRequestComplete);
      if (blnInputTransferPositionLabwareRequestComplete == 0)
      {
        blnSuccess = RUNTIMEERRORHANDLING::TransportError();
        TrcTrace(Translate("-----RunTime error file creation blnSuccess = "), blnSuccess);
        abort;
      }
      ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    }
  }
  SeqResetSequenceIndexes(ML_STAR.trpAgarPlates1To4);
  {
    for(loopCounter1 = 0; loopCounter1 < 4;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 1)
      {
        ML_STAR.GrowthPlate_Picking.SetCurrentPosition(1);
      }
      if (loopCounter1 == 2)
      {
        ML_STAR.GrowthPlate_Picking.SetCurrentPosition(13);
      }
      if (loopCounter1 == 3)
      {
        ML_STAR.GrowthPlate_Picking.SetCurrentPosition(25);
      }
      if (loopCounter1 == 4)
      {
        ML_STAR.GrowthPlate_Picking.SetCurrentPosition(37);
      }
      MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
      TrcTrace(Translate("                                                                                                                              Agar Plate "), loopCounter1);
      MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
      _strAgarPlateID = StrConcat2(Translate("AgarPlate"), loopCounter1);
      MECC::TraceComment(Translate("Get agar plate from deck and put in working position"));
      ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      MECC::TraceComment(Translate("Park agar plate lid"));
      ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      MECC::TraceComment(Translate("Move arm out of the way"));
      ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
      {
        loopCounter2 = 0;
        while (1 == 1)
        {
          loopCounter2 = loopCounter2 + 1;
          MECC::TraceComment(Translate("Show application main window."));
          strReturnValue = EASYPICKII::GUI::Show(EASYPICKII::GUI::SHOW::MODE::_NORMAL);
          if (strReturnValue != EASYPICKII::ERROR::_NONE)
          {
            EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
            abort;
          }
          MECC::TraceComment(Translate("Turn on the light table"));
          strReturnValue = EASYPICKII_STEPS::easyStep_Light_On(ML_STAR, _strLightSource, _intLightIntensity);
          if (strReturnValue != EASYPICKII::ERROR::_NONE)
          {
            EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
            abort;
          }
          MECC::TraceComment(Translate("Switch on top light."));
          strReturnValue = EASYPICKII::MLSTAR::Light_On(ML_STAR, _strLightSourceTop, _intLightIntensity);
          if (strReturnValue != EASYPICKII::ERROR::_NONE)
          {
            EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
            abort;
          }
          MECC::TraceComment(Translate("Take picture."));
          TrcTrace(Translate("_strCameraSettings = "), _strCameraSettings);
          if (_blnSimulationMode == 0)
          {
            strReturnValue = EASYPICKII_STEPS::easyStep_Colony_TakePicture(ML_STAR, _strCameraSettings, EASYPICKII::_HSLTRUE);
            if (strReturnValue != EASYPICKII::ERROR::_NONE)
            {
              EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
              abort;
            }
          }
          else
          {
            tmp_ReturnValue = EASYPICKII::CAMERA::LoadPicture("settings\\ColonyDemo\\Demo_Plate_gray.tif");
            if (strReturnValue != EASYPICKII::ERROR::_NONE)
            {
              EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
              abort;
            }
          }
          MECC::TraceComment(Translate("Turn off the light table"));
          strReturnValue = EASYPICKII_STEPS::easyStep_Light_Off(ML_STAR, _strLightSource);
          if (strReturnValue != EASYPICKII::ERROR::_NONE)
          {
            EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
            abort;
          }
          MECC::TraceComment(Translate("Turn off the top light"));
          strReturnValue = EASYPICKII::MLSTAR::Light_Off(ML_STAR, _strLightSourceTop);
          if (strReturnValue != EASYPICKII::ERROR::_NONE)
          {
            EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
            abort;
          }
          MECC::TraceComment(Translate("Analyse picture"));
          strReturnValue = EASYPICKII_STEPS::easyStep_Colony_Analyse(_strColoniesSettings, EASYPICKII::_HSLTRUE, _strAgarPlateID, _strAgarPlateDescription, intEasyPickIIRackID);
          if (strReturnValue != EASYPICKII::ERROR::_NONE)
          {
            EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
            customDialog_2.InitCustomDialog("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");
            customDialog_2.ShowCustomDialog();
            intReturnValueDialog = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
            TrcTrace(Translate("intReturnValueDialog (2 = cancel, 1 = continue) = "), intReturnValueDialog);
            if (intReturnValueDialog == 2)
            {
              abort;
            }
          }
          else
          {
            break;
          }
        }
      }
      MECC::TraceComment(Translate("Get the analysed result"));
      strReturnValue = EASYPICKII::DATABASE::GetEasyPickIIRack(intEasyPickIIRackID, _strAgarPlateID, strRackPictureFilename, intRackWellsX, intRackWellsY, intRackErrorCode, _strAgarPlateDescription);
      if (strReturnValue != EASYPICKII::ERROR::_NONE)
      {
        EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
        abort;
      }
      intNumberOfPickedColonies = 0;
      {
        loopCounterColoniesPickingCycle = 0;
        while (1 == 1)
        {
          loopCounterColoniesPickingCycle = loopCounterColoniesPickingCycle + 1;
          intNumberOfColoniesForNextCycle = _intMaxColoniesPerWell - intNumberOfPickedColonies;
          TrcTrace(Translate("intNumberOfColoniesForNextCycle is "), intNumberOfColoniesForNextCycle);
          if (intNumberOfColoniesForNextCycle > _intMaxNumberOfChannelsForPicking)
          {
            intNumberOfColoniesForNextCycle = _intMaxNumberOfChannelsForPicking;
          }
          TrcTrace(Translate("intNumberOfColoniesForNextCycle is "), intNumberOfColoniesForNextCycle);
          MECC::TraceComment(Translate("Generate channel pattern for picking"));
          strChannelPatternForPicking = EASYPICKII::HELPER::MLSTAR::ChannelPattern_LeftAdjust(_intMaxNumberOfChannelsForPicking, _intNumberOfChannels);
          MECC::TraceComment(Translate("Retrieve the next colony positions (sequence)"));
          strReturnValue = EASYPICKII_STEPS::easyStep_Colony_RetrieveColonyPositions(ML_STAR, "easypickii_adjust_small_0001", "Agar_Plate", "ml_star\\EasyPickII\\ColonySpot\\colony_spot.rck", intEasyPickIIRackID, _arrIntColoniesPerWell, strChannelPatternForPicking, strUsedChannelPattern, intUsedNumberOfColonies, intTotalNumberOfColonies, seqColonySequence, arrEasyPickColonyPropertyID, arrintChannelToWell);
          if (strReturnValue != EASYPICKII::ERROR::_NONE)
          {
            EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
            abort;
          }
          MECC::TraceComment(Translate("Check for minimum found 1 colony, otherwise break the loop"));
          if (intTotalNumberOfColonies == 0)
          {
            EASYPICKII::GUI::Hide();
            break;
          }
          MECC::TraceComment(Translate("Check for minimum 1 colony to be picked, otherwise break the loop"));
          if (intUsedNumberOfColonies == 0)
          {
            EASYPICKII::GUI::Hide();
            break;
          }
          if( 0 == tmrDisplayWait.SetTimer(2) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == tmrDisplayWait.WaitTimer(hslFalse, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          MECC::TraceComment(Translate("Hide application window."));
          EASYPICKII::GUI::Hide();
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          TipCount::Write2(ML_STAR.Tips300ulStandardVolumeTipWithFilter_Partial, Translate("300ulStandardVolumeTipWithFilter"), ML_STAR);
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            	strAspirateStepReturn = arrRetValues[2];
          }
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          MECC::TraceComment(Translate("Update the pipetting states of picked colonies"));
          strReturnValue = EASYPICKII_STEPS::easyStep_Colony_UpdatePickingState(strAspirateStepReturn, arrEasyPickColonyPropertyID);
          if (strReturnValue != EASYPICKII::ERROR::_NONE)
          {
            EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
            abort;
          }
          intNumberOfPickedColonies = intNumberOfPickedColonies + intUsedNumberOfColonies;
          TrcTrace(Translate("intNumberOfPickedColonies is "), intNumberOfPickedColonies);
          if (intNumberOfPickedColonies >= _intMaxColoniesPerWell)
          {
            break;
          }
        }
      }
      MECC::TraceComment(Translate("Agar plate lid to agar plate"));
      ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      MECC::TraceComment(Translate("Agar plate from working position to deck"));
      ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      MECC::TraceComment(Translate("Hide application window."));
      EASYPICKII::GUI::Hide();
    }
  }
  SeqResetSequenceIndexes(ML_STAR.trpAgarPlates1To4);
  {
    for(loopCounter3 = 0; loopCounter3 < 4;)
    {
      loopCounter3 = loopCounter3 + 1;
      ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
      blnSuccess = LABWAREHANDLING::ReturnLabware(_strAgarPlateName, _strTransferPositionAgarPlate);
      TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
      if (_blnSimulationMode == 1)
      {
        if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        blnSuccess = LABWAREHANDLING::UtilityCreatLabwareReturnCompletionFile(_strAgarPlateName, _strTransferPositionAgarPlate);
        TrcTrace(Translate("-----Utility Create Labware Return Completion File  : blnSuccess = "), blnSuccess);
      }
      blnSuccess = LABWAREHANDLING::WaitForLabwareReturnCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
      TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
    }
  }
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
  blnSuccess = LABWAREHANDLING::ReturnLabware(_strGrowthPlateName, _strTransferPositionGrowthPlate);
  TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
  if (_blnSimulationMode == 1)
  {
    if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    blnSuccess = LABWAREHANDLING::UtilityCreatLabwareReturnCompletionFile(_strGrowthPlateName, _strTransferPositionGrowthPlate);
    TrcTrace(Translate("-----Utility Create Labware Return Completion File  : blnSuccess = "), blnSuccess);
  }
  blnSuccess = LABWAREHANDLING::WaitForLabwareReturnCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
  TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Pipetting : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function D_Cleanup(  ) void {
  private file hdlStatusFile;
  private variable blnMethodFinishedSuccessfully;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Cleanup : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  if (_blnAbortFlag == 0)
  {
    blnMethodFinishedSuccessfully = 1;
    MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
  }
  else
  {
    blnMethodFinishedSuccessfully = 0;
  }
  if (_blnSimulationMode == 0)
  {
    EASYPICKII_STEPS::easyStep_DeInit(ML_STAR);
  }
  EASYPICKII_STEPS::easyStep_DeInit(ML_STAR);
  hdlStatusFile.AddField("Status", blnMethodFinishedSuccessfully, hslInteger);
  hdlStatusFile.SetDelimiter(hslCSVDelimited);
  if( 0 == hdlStatusFile.Open(_strFilepathStatus, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strFilepathStatus, "HxMetEdCompCmd");
  }
  if( 0 == hdlStatusFile.WriteRecord() )
  {
        MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 != hdlStatusFile.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  hdlStatusFile.RemoveFields();
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Cleanup : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function _VersionInfo(  ) void {
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   VersionInfo : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   VersionInfo : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}
