private function A_Definitions(  ) void ;
private function B_Initialise(  ) void ;
private function C_Pipetting(  ) void ;
private function D_Cleanup(  ) void ;
private function _MediaLineReturnHandle( variable i_intReturnCode, variable i_strCommandDescription ) void ;
private function _VersionInfo(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  private dialog customDialog_1;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Aborting : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  customDialog_1.InitCustomDialog("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");
  customDialog_1.ShowCustomDialog();
  TrcTrace(Translate("------------------------------------ Recovery method filepath - C:\Program Files (x86)\HAMILTON\Methods\[MPE]2\96head crash recovery.med ------------------------------------"), Translate(""));
  _blnAbortFlag = 1;
  D_Cleanup();
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Aborting : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function B_Initialise(  ) void {
  private variable intMediaLineReturn;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Initialise : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  _blnSimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
  TrcTrace(Translate("_blnSimulationMode = "), _blnSimulationMode);
  if (_blnSimulationMode == 1)
  {
    _intSimulationMode = 1;
  }
  else
  {
    _intSimulationMode = 0;
  }
  intMediaLineReturn = HSLHamiltonMediaFillModule::Initialize(_intMediaLineCOMPort, _intSimulationMode, _intMediaLineInstrumentID);
  TrcTrace(Translate("_intMediaLineInstrumentID = "), _intMediaLineInstrumentID);
  intMediaLineReturn = HSLHamiltonMediaFillModule::SetPumpDirection(_intMediaLineInstrumentID, _intMediaLinePumpID, 0);
  intMediaLineReturn = HSLHamiltonMediaFillModule::FillTrough(_intMediaLineInstrumentID, _intMediaLinePumpID, 75, 1);
  _MediaLineReturnHandle(intMediaLineReturn, Translate("fill trough"));
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Initialise : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function A_Definitions(  ) void {
  private variable blnSuccess;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Definitions : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  _intMediaLineCOMPort = 8;
  TrcTrace(Translate("_intMediaLineCOMPort = "), _intMediaLineCOMPort);
  _intMediaLinePumpID = 1;
  TrcTrace(Translate("_intMediaLinePumpID = "), _intMediaLinePumpID);
  _strFilepathStatus = Translate("C:\\HamiltonOutputFiles\\HamiltonStatus.csv");
  TrcTrace(Translate("_strFilepathStatus = "), _strFilepathStatus);
  blnSuccess = FileDirectoryLib::CheckIfFileExists(_strFilepathStatus);
  if (blnSuccess == 1)
  {
    FileDirectoryLib::DeleteFile(_strFilepathStatus);
  }
  _strTransferPositionGrowthPlate = Translate("PlateHandOff");
  TrcTrace(Translate("_strTransferPositionGrowthPlate = "), _strTransferPositionGrowthPlate);
  _strTransferPositionTips1000 = Translate("TipsHandOff");
  TrcTrace(Translate("_strTransferPositionTips1000 = "), _strTransferPositionTips1000);
  _strWastePositionTips1000 = Translate("Tips1000ulHighVolumeTipWithFilter_Waste");
  _strWastePositionTips300 = Translate("Tips300ulStandardVolumeTipWithFilter_Waste");
  _strWastePositionTips50 = Translate("Tips50ulTipWithFilter_Waste");
  _strGrowthPlateName = Translate("GrowthPlate");
  TrcTrace(Translate("_strGrowthPlateName = "), _strGrowthPlateName);
  _strTips1000Name = Translate("Tips1000");
  TrcTrace(Translate("_strTips1000Name = "), _strTips1000Name);
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Definitions : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function C_Pipetting(  ) void {
  private variable intMediaLineReturn;
  private variable blnSuccess;
  private timer tmrSimModeLabwareRequestCompletionFileCreation;
  private variable strTransferPosition;
  private variable strInputTransferPositionLabwareName;
  private variable strInputTransferPositionOccupancy;
  private variable blnInputTransferPositionLabwareRequestComplete;
  private variable loopCounter1;
  private variable loopCounter2;
  private variable loopCounter3;
  private variable blnEjectCOREGrips;
  private variable intTimeElapsed;
  private timer tmrVibrationWaste;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Pipetting : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
  blnSuccess = LABWAREHANDLING::RequestLabware(_strTips1000Name, _strTransferPositionTips1000);
  TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
  if (_blnSimulationMode == 1)
  {
    if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    blnSuccess = LABWAREHANDLING::UtilityCreateLabwareRequestCompletionFile(_strTips1000Name, _strTransferPositionTips1000);
    TrcTrace(Translate("-----Utility Create Labware Request Completion File  : blnSuccess = "), blnSuccess);
  }
  blnSuccess = LABWAREHANDLING::WaitForLabwareRequestCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
  TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
  blnInputTransferPositionLabwareRequestComplete = IF_AND_IF_OR::If_And_3_Variables(strTransferPosition, _strTransferPositionTips1000, strInputTransferPositionLabwareName, _strTips1000Name, strInputTransferPositionOccupancy, Translate("1"));
  TrcTrace(Translate("-----blnInputTransferPositionLabwareRequestComplete = "), blnInputTransferPositionLabwareRequestComplete);
  if (blnInputTransferPositionLabwareRequestComplete == 0)
  {
    blnSuccess = RUNTIMEERRORHANDLING::TransportError();
    TrcTrace(Translate("-----RunTime error file creation blnSuccess = "), blnSuccess);
    abort;
  }
  ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
  ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
  blnSuccess = LABWAREHANDLING::ReturnLabware(_strTips1000Name, _strTransferPositionTips1000);
  TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
  if (_blnSimulationMode == 1)
  {
    if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    blnSuccess = LABWAREHANDLING::UtilityCreatLabwareReturnCompletionFile(_strTips1000Name, _strTransferPositionTips1000);
    TrcTrace(Translate("-----Utility Create Labware Return Completion File  : blnSuccess = "), blnSuccess);
  }
  blnSuccess = LABWAREHANDLING::WaitForLabwareReturnCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
  TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
  {
    for(loopCounter1 = 0; loopCounter1 < 4;)
    {
      loopCounter1 = loopCounter1 + 1;
      MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
      blnSuccess = LABWAREHANDLING::RequestLabware(_strGrowthPlateName, _strTransferPositionGrowthPlate);
      TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
      if (_blnSimulationMode == 1)
      {
        if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        blnSuccess = LABWAREHANDLING::UtilityCreateLabwareRequestCompletionFile(_strGrowthPlateName, _strTransferPositionGrowthPlate);
        TrcTrace(Translate("-----Utility Create Labware Request Completion File  : blnSuccess = "), blnSuccess);
      }
      blnSuccess = LABWAREHANDLING::WaitForLabwareRequestCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
      TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
      blnInputTransferPositionLabwareRequestComplete = IF_AND_IF_OR::If_And_3_Variables(strTransferPosition, _strTransferPositionGrowthPlate, strInputTransferPositionLabwareName, _strGrowthPlateName, strInputTransferPositionOccupancy, Translate("1"));
      TrcTrace(Translate("-----blnInputTransferPositionLabwareRequestComplete = "), blnInputTransferPositionLabwareRequestComplete);
      if (blnInputTransferPositionLabwareRequestComplete == 0)
      {
        blnSuccess = RUNTIMEERRORHANDLING::TransportError();
        TrcTrace(Translate("-----RunTime error file creation blnSuccess = "), blnSuccess);
        abort;
      }
      if (loopCounter1 == 3)
      {
        blnEjectCOREGrips = 1;
      }
      if (loopCounter1 <= 3)
      {
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      }
    }
  }
  SeqResetSequenceIndexes(ML_STAR.trpGrowthPlates2To4);
  intMediaLineReturn = HSLHamiltonMediaFillModule::FillTrough(_intMediaLineInstrumentID, _intMediaLinePumpID, 75, 60);
  _MediaLineReturnHandle(intMediaLineReturn, Translate("fill trough"));
  intMediaLineReturn = HSLHamiltonMediaFillModule::WaitForPump(_intMediaLineInstrumentID, _intMediaLinePumpID);
  _MediaLineReturnHandle(intMediaLineReturn, Translate("wait for pump"));
  ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
  {
    for(loopCounter2 = 0; loopCounter2 < 4;)
    {
      loopCounter2 = loopCounter2 + 1;
      onerror goto errLabel_2 ;
      err.Clear();
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      errLabel_2 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        intMediaLineReturn = HSLHamiltonMediaFillModule::FillTrough(_intMediaLineInstrumentID, _intMediaLinePumpID, 75, 60);
        _MediaLineReturnHandle(intMediaLineReturn, Translate("fill trough"));
        intMediaLineReturn = HSLHamiltonMediaFillModule::WaitForPump(_intMediaLineInstrumentID, _intMediaLinePumpID);
        _MediaLineReturnHandle(intMediaLineReturn, Translate("wait for pump"));
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      }   /* end if from skip handler if no error */
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    }
  }
  MOVE96HEADANDARM::Move96HeadToFront(ML_STAR);
  ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  WasteChute::WasteChuteShakeStart(ML_STAR, 1, 40, 1);
  if( 0 == tmrVibrationWaste.SetTimer(5) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  TIMER_WAIT_FOR_VARIABLE_INPUTS::TimerWaitFor(tmrVibrationWaste, _blnSimulationMode, _blnSimulationMode, intTimeElapsed);
  WasteChute::WasteChuteShakeStop(ML_STAR, 1);
  {
    for(loopCounter3 = 0; loopCounter3 < 4;)
    {
      loopCounter3 = loopCounter3 + 1;
      if (loopCounter3 == 4)
      {
        blnEjectCOREGrips = 1;
      }
      else
      {
        blnEjectCOREGrips = 0;
      }
      if (loopCounter3 >= 2)
      {
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      }
      MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
      blnSuccess = LABWAREHANDLING::ReturnLabware(_strGrowthPlateName, _strTransferPositionGrowthPlate);
      TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
      if (_blnSimulationMode == 1)
      {
        if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        blnSuccess = LABWAREHANDLING::UtilityCreatLabwareReturnCompletionFile(_strGrowthPlateName, _strTransferPositionGrowthPlate);
        TrcTrace(Translate("-----Utility Create Labware Return Completion File  : blnSuccess = "), blnSuccess);
      }
      blnSuccess = LABWAREHANDLING::WaitForLabwareReturnCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
      TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
    }
  }
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Pipetting : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function D_Cleanup(  ) void {
  private variable intMediaLineReturn;
  private file hdlStatusFile;
  private variable blnMethodFinishedSuccessfully;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Cleanup : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  if (_blnAbortFlag == 0)
  {
    blnMethodFinishedSuccessfully = 1;
    MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
  }
  else
  {
    blnMethodFinishedSuccessfully = 0;
  }
  hdlStatusFile.AddField("Status", blnMethodFinishedSuccessfully, hslInteger);
  hdlStatusFile.SetDelimiter(hslCSVDelimited);
  if( 0 == hdlStatusFile.Open(_strFilepathStatus, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strFilepathStatus, "HxMetEdCompCmd");
  }
  if( 0 == hdlStatusFile.WriteRecord() )
  {
        MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 != hdlStatusFile.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  hdlStatusFile.RemoveFields();
  intMediaLineReturn = HSLHamiltonMediaFillModule::Disconnect(_intMediaLineInstrumentID);
  _MediaLineReturnHandle(intMediaLineReturn, Translate("disconnect"));
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Cleanup : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function _VersionInfo(  ) void {
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   VersionInfo : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   VersionInfo : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function _MediaLineReturnHandle( variable i_intReturnCode, variable i_strCommandDescription ) void {
  private dialog customDialog_3;
  if(0){
    if (i_intReturnCode == 1)
    {
      TrcTrace4(Translate("--------------------------- Media line error - "), i_strCommandDescription, Translate(" ---------------------------"), Translate(""));
      customDialog_3.InitCustomDialog("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");
      customDialog_3.SetCustomDialogProperty( "textBlock3.Text", i_strCommandDescription );
      customDialog_3.ShowCustomDialog();
      abort;
    }
  }
}
