private function A_Definitions(  ) void ;
private function B_Initialise(  ) void ;
private function C_Pipetting(  ) void ;
private function D_Cleanup(  ) void ;
private function _VersionInfo(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  private dialog customDialog_1;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Aborting : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  customDialog_1.InitCustomDialog("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");
  customDialog_1.ShowCustomDialog();
  TrcTrace(Translate("------------------------------------ Recovery method filepath - C:\Program Files (x86)\HAMILTON\Methods\[MPE]2\96head crash recovery.med ------------------------------------"), Translate(""));
  _blnAbortFlag = 1;
  D_Cleanup();
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Aborting : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function B_Initialise(  ) void {
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Initialise : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  _blnSimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
  TrcTrace(Translate("_blnSimulationMode = "), _blnSimulationMode);
  if (_blnSimulationMode == 1)
  {
    _intSimulationMode = 1;
  }
  else
  {
    _intSimulationMode = 0;
  }
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Initialise : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function A_Definitions(  ) void {
  private variable blnSuccess;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Definitions : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  _strFilepathStatus = Translate("C:\\HamiltonOutputFiles\\HamiltonStatus.csv");
  TrcTrace(Translate("_strFilepathStatus = "), _strFilepathStatus);
  blnSuccess = FileDirectoryLib::CheckIfFileExists(_strFilepathStatus);
  if (blnSuccess == 1)
  {
    FileDirectoryLib::DeleteFile(_strFilepathStatus);
  }
  _strFilepathValidation = Translate("C:\\HamiltonOutputFiles\\FileValidation.csv");
  TrcTrace(Translate("_strFilepathValidation = "), _strFilepathValidation);
  blnSuccess = FileDirectoryLib::CheckIfFileExists(_strFilepathValidation);
  if (blnSuccess == 1)
  {
    FileDirectoryLib::DeleteFile(_strFilepathValidation);
  }
  _strTransferPositionGrowthPlate = Translate("PlateHandOff");
  TrcTrace(Translate("_strTransferPositionGrowthPlate = "), _strTransferPositionGrowthPlate);
  _strTransferPositionTips50 = Translate("TipsHandOff");
  TrcTrace(Translate("_strTransferPositionTips50 = "), _strTransferPositionTips50);
  _strWastePositionTips1000 = Translate("Tips1000ulHighVolumeTipWithFilter_Waste");
  _strWastePositionTips300 = Translate("Tips300ulStandardVolumeTipWithFilter_Waste");
  _strWastePositionTips50 = Translate("Tips50ulTipWithFilter_Waste");
  _strGrowthPlateName = Translate("GrowthPlate");
  TrcTrace(Translate("_strGrowthPlateName = "), _strGrowthPlateName);
  _strTips50Name = Translate("Tips50");
  TrcTrace(Translate("_strTips50Name = "), _strTips50Name);
  _strWorklistFilepath = Translate("C:\\PAATestFolder\\WorklistFiles\\DiluteSamplesWorklist\\Worklist.csv");
  TrcTrace(Translate("_strWorklistFilepath = "), _strWorklistFilepath);
  blnSuccess = DELETESCHEMAINIFROMWORKLISTFOLDER::DeleteSchemaIniFromWorklistFolder(_strWorklistFilepath);
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Definitions : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function C_Pipetting(  ) void {
  private variable blnSuccess;
  private timer tmrSimModeLabwareRequestCompletionFileCreation;
  private variable strTransferPosition;
  private variable strInputTransferPositionLabwareName;
  private variable strInputTransferPositionOccupancy;
  private variable blnInputTransferPositionLabwareRequestComplete;
  private variable intReplaceTips;
  private variable loopCounter4;
  private variable loopCounter1;
  private variable blnEjectCOREGrips;
  private variable loopCounter3;
  private variable strSourcePlateWell;
  private file hdlWorklistFile;
  private variable loopCounter2;
  private variable loopCounter5;
  private sequence seqGrowthPlateAspirate;
  private variable loopCounter7;
  private variable loopCounter6;
  private variable intPositionLookupReturn;
  private variable blnFileContentsCorrect;
  private file hdlValidationFile;
  private variable loopCounter8;
  private variable blnWorklistFileExists;
  private timer tmrWorklistFileCheck;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Pipetting : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
  {
    loopCounter8 = 0;
    while (1 == 1)
    {
      loopCounter8 = loopCounter8 + 1;
      blnWorklistFileExists = FileDirectoryLib::CheckIfFileExists(_strWorklistFilepath);
      TrcTrace(Translate("blnWorklistFileExists = "), blnWorklistFileExists);
      if (blnWorklistFileExists == 1)
      {
        break;
      }
      if( 0 == tmrWorklistFileCheck.SetTimer(5) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == tmrWorklistFileCheck.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
  }
  blnFileContentsCorrect = 1;
  hdlWorklistFile.AddField("SourcePlateWell", strSourcePlateWell, hslString, 255);
  hdlWorklistFile.SetDelimiter(hslCSVDelimited);
  if( 0 == hdlWorklistFile.Open(_strWorklistFilepath, hslAppend) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strWorklistFilepath, "HxMetEdCompCmd");
  }
  {
    loopCounter2 = 0;
    while (
       (hdlWorklistFile.Eof() == 0)
    )
    {
      loopCounter2 = loopCounter2 + 1;
      if( 0 == hdlWorklistFile.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      intPositionLookupReturn = SeqLookupPosition(ML_STAR.GrowthPlate, Translate("GrowthPlate"), strSourcePlateWell, 1, 1);
      if (intPositionLookupReturn == 0)
      {
        blnFileContentsCorrect = 0;
      }
      {
        for(loopCounter5 = 0; loopCounter5 < 8;)
        {
          loopCounter5 = loopCounter5 + 1;
          SeqAdd(seqGrowthPlateAspirate, Translate("GrowthPlate_1"), strSourcePlateWell);
        }
      }
      TrcTrace(Translate("strSourcePlateWell = "), strSourcePlateWell);
    }
  }
  if( 0 != hdlWorklistFile.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  hdlWorklistFile.RemoveFields();
  SeqResetSequenceIndexes(seqGrowthPlateAspirate);
  hdlValidationFile.AddField("Validated", blnFileContentsCorrect, hslInteger);
  hdlValidationFile.SetDelimiter(hslCSVDelimited);
  if( 0 == hdlValidationFile.Open(_strFilepathValidation, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strFilepathValidation, "HxMetEdCompCmd");
  }
  if( 0 == hdlValidationFile.WriteRecord() )
  {
        MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 != hdlValidationFile.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  hdlValidationFile.RemoveFields();
  if (blnFileContentsCorrect == 0)
  {
    MECC::TraceComment(Translate("File contains invalid wells"));
    abort;
  }
  intReplaceTips = TIPHANDLING::CheckAvailableTipsFromDeck(ML_STAR, ML_STAR.Tips50ulTipWithFilter_Partial, 64, 50);
  TrcTrace(Translate("-----Replace tips  : intReplaceTips = "), intReplaceTips);
  if (intReplaceTips > 0)
  {
    if (intReplaceTips == 1)
    {
      blnSuccess = TIPHANDLING::MoveTipRackWithCOREGrip_ChannelTipsOnly(ML_STAR, ML_STAR.COREGripTool_OnWaste_1000ul_0001, ML_STAR.Tips50ulTipWithFilter_Partial, ML_STAR.Tips50ulTipWithFilter_HandOff, 0, 50, 0);
      TrcTrace(Translate("-----Move tip rack with CORE grips : blnSuccess = "), blnSuccess);
      MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
      blnSuccess = LABWAREHANDLING::ReturnLabware(_strTips50Name, _strTransferPositionTips50);
      TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
      if (_blnSimulationMode == 1)
      {
        if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        blnSuccess = LABWAREHANDLING::UtilityCreatLabwareReturnCompletionFile(_strTips50Name, _strTransferPositionTips50);
        TrcTrace(Translate("-----Utility Create Labware Return Completion File  : blnSuccess = "), blnSuccess);
      }
      blnSuccess = LABWAREHANDLING::WaitForLabwareReturnCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
      TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
    }
    if (intReplaceTips == 2)
    {
      blnSuccess = TIPHANDLING::MoveTipRackWithCOREGrip_EmptyRackToWaste(ML_STAR, ML_STAR.COREGripTool_OnWaste_1000ul_0001, ML_STAR.Tips50ulTipWithFilter_Partial, ML_STAR.Tips50ulTipWithFilter_Waste, 0);
      TrcTrace(Translate("-----Move tip rack with CORE grips : blnSuccess = "), blnSuccess);
    }
    MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
    blnSuccess = LABWAREHANDLING::RequestLabware(_strTips50Name, _strTransferPositionTips50);
    TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
    if (_blnSimulationMode == 1)
    {
      if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      blnSuccess = LABWAREHANDLING::UtilityCreateLabwareRequestCompletionFile(_strTips50Name, _strTransferPositionTips50);
      TrcTrace(Translate("-----Utility Create Labware Request Completion File  : blnSuccess = "), blnSuccess);
    }
    blnSuccess = LABWAREHANDLING::WaitForLabwareRequestCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
    TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
    blnInputTransferPositionLabwareRequestComplete = IF_AND_IF_OR::If_And_3_Variables(strTransferPosition, _strTransferPositionTips50, strInputTransferPositionLabwareName, _strTips50Name, strInputTransferPositionOccupancy, Translate("1"));
    TrcTrace(Translate("-----blnInputTransferPositionLabwareRequestComplete = "), blnInputTransferPositionLabwareRequestComplete);
    if (blnInputTransferPositionLabwareRequestComplete == 0)
    {
      blnSuccess = RUNTIMEERRORHANDLING::TransportError();
      TrcTrace(Translate("-----RunTime error file creation blnSuccess = "), blnSuccess);
      abort;
    }
    blnSuccess = TIPHANDLING::MoveTipRackWithCOREGrip_ChannelTipsOnly(ML_STAR, ML_STAR.COREGripTool_OnWaste_1000ul_0001, ML_STAR.Tips50ulTipWithFilter_HandOff, ML_STAR.Tips50ulTipWithFilter_Partial, 0, 50, 1);
    TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
  }
  {
    for(loopCounter1 = 0; loopCounter1 < 5;)
    {
      loopCounter1 = loopCounter1 + 1;
      MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
      blnSuccess = LABWAREHANDLING::RequestLabware(_strGrowthPlateName, _strTransferPositionGrowthPlate);
      TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
      if (_blnSimulationMode == 1)
      {
        if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        blnSuccess = LABWAREHANDLING::UtilityCreateLabwareRequestCompletionFile(_strGrowthPlateName, _strTransferPositionGrowthPlate);
        TrcTrace(Translate("-----Utility Create Labware Request Completion File  : blnSuccess = "), blnSuccess);
      }
      blnSuccess = LABWAREHANDLING::WaitForLabwareRequestCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
      TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
      blnInputTransferPositionLabwareRequestComplete = IF_AND_IF_OR::If_And_3_Variables(strTransferPosition, _strTransferPositionGrowthPlate, strInputTransferPositionLabwareName, _strGrowthPlateName, strInputTransferPositionOccupancy, Translate("1"));
      TrcTrace(Translate("-----blnInputTransferPositionLabwareRequestComplete = "), blnInputTransferPositionLabwareRequestComplete);
      if (blnInputTransferPositionLabwareRequestComplete == 0)
      {
        blnSuccess = RUNTIMEERRORHANDLING::TransportError();
        TrcTrace(Translate("-----RunTime error file creation blnSuccess = "), blnSuccess);
        abort;
      }
      if (loopCounter4 == 5)
      {
        blnEjectCOREGrips = 1;
      }
      if (loopCounter1 == 1)
      {
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      }
      else
      {
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      }
    }
  }
  SeqResetSequenceIndexes(ML_STAR.trpGrowthPlates2To5);
  {
    for(loopCounter6 = 0; loopCounter6 < 4;)
    {
      loopCounter6 = loopCounter6 + 1;
      {
        for(loopCounter7 = 0; loopCounter7 < 12;)
        {
          loopCounter7 = loopCounter7 + 1;
          {
            	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
          }
          {
            	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
          }
          if (loopCounter7 == 6)
          {
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          }
        }
      }
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      SeqIncrement(seqGrowthPlateAspirate, 8);
    }
  }
  {
    for(loopCounter3 = 0; loopCounter3 < 5;)
    {
      loopCounter3 = loopCounter3 + 1;
      if (loopCounter3 < 5)
      {
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      }
      else
      {
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      }
      MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
      blnSuccess = LABWAREHANDLING::ReturnLabware(_strGrowthPlateName, _strTransferPositionGrowthPlate);
      TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
      if (_blnSimulationMode == 1)
      {
        if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        blnSuccess = LABWAREHANDLING::UtilityCreatLabwareReturnCompletionFile(_strGrowthPlateName, _strTransferPositionGrowthPlate);
        TrcTrace(Translate("-----Utility Create Labware Return Completion File  : blnSuccess = "), blnSuccess);
      }
      blnSuccess = LABWAREHANDLING::WaitForLabwareReturnCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
      TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
    }
  }
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Pipetting : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function D_Cleanup(  ) void {
  private file hdlStatusFile;
  private variable blnMethodFinishedSuccessfully;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Cleanup : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  if (_blnAbortFlag == 0)
  {
    blnMethodFinishedSuccessfully = 1;
    MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
  }
  else
  {
    blnMethodFinishedSuccessfully = 0;
  }
  hdlStatusFile.AddField("Status", blnMethodFinishedSuccessfully, hslInteger);
  hdlStatusFile.SetDelimiter(hslCSVDelimited);
  if( 0 == hdlStatusFile.Open(_strFilepathStatus, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strFilepathStatus, "HxMetEdCompCmd");
  }
  if( 0 == hdlStatusFile.WriteRecord() )
  {
        MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 != hdlStatusFile.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  hdlStatusFile.RemoveFields();
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Cleanup : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function _VersionInfo(  ) void {
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   VersionInfo : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   VersionInfo : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}
