private function A_Definitions(  ) void ;
private function B_Initialise(  ) void ;
private function C_Pipetting(  ) void ;
private function D_Cleanup(  ) void ;
private function _ThermoshakeReturnHandle( variable i_blnSuccess, variable i_strCommandDescription ) void ;
private function _VersionInfo(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  private dialog customDialog_1;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Aborting : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  customDialog_1.InitCustomDialog("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");
  customDialog_1.ShowCustomDialog();
  TrcTrace(Translate("------------------------------------ Recovery method filepath - C:\Program Files (x86)\HAMILTON\Methods\[MPE]2\96head crash recovery.med ------------------------------------"), Translate(""));
  _blnAbortFlag = 1;
  D_Cleanup();
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Aborting : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function B_Initialise(  ) void {
  private variable blnThermoshakeSuccess;
  private variable strThermoshakeErrorCode;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Initialise : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  _blnSimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
  TrcTrace(Translate("_blnSimulationMode = "), _blnSimulationMode);
  if (_blnSimulationMode == 1)
  {
    _intSimulationMode = 1;
  }
  else
  {
    _intSimulationMode = 0;
  }
  blnThermoshakeSuccess = HSLInhecoTECLib::Initialize(_intThermoshakeControlID, _blnSimulationMode, strThermoshakeErrorCode);
  _ThermoshakeReturnHandle(blnThermoshakeSuccess, Translate("initialise"));
  blnThermoshakeSuccess = HSLInhecoTECLib::SetTargetTemperature(_intThermoshakeControlID, _intThermoshakeDeviceID, 4.0, strThermoshakeErrorCode);
  _ThermoshakeReturnHandle(blnThermoshakeSuccess, Translate("set target temperature"));
  blnThermoshakeSuccess = HSLInhecoTECLib::StartTemperatureControl(_intThermoshakeControlID, _intThermoshakeDeviceID, strThermoshakeErrorCode);
  _ThermoshakeReturnHandle(blnThermoshakeSuccess, Translate("start temperature control"));
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Initialise : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function A_Definitions(  ) void {
  private variable blnSuccess;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Definitions : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  _intThermoshakeControlID = 0;
  TrcTrace(Translate("_intThermoshakeControlID = "), _intThermoshakeControlID);
  _intThermoshakeDeviceID = 1;
  TrcTrace(Translate("_intThermoshakeDeviceID = "), _intThermoshakeDeviceID);
  _strFilepathStatus = Translate("C:\\HamiltonOutputFiles\\HamiltonStatus.csv");
  TrcTrace(Translate("_strFilepathStatus = "), _strFilepathStatus);
  blnSuccess = FileDirectoryLib::CheckIfFileExists(_strFilepathStatus);
  if (blnSuccess == 1)
  {
    FileDirectoryLib::DeleteFile(_strFilepathStatus);
  }
  _strTransferPositionGrowthPlate = Translate("PlateHandOff");
  TrcTrace(Translate("_strTransferPositionGrowthPlate = "), _strTransferPositionGrowthPlate);
  _strTransferPositionDIWaterPlate = Translate("PlateHandOff");
  TrcTrace(Translate("_strTransferPositionDIWaterPlate = "), _strTransferPositionDIWaterPlate);
  _strTransferPositionTips300 = Translate("TipsHandOff");
  TrcTrace(Translate("_strTransferPositionTips300 = "), _strTransferPositionTips300);
  _strTransferPositionTips50 = Translate("TipsHandOff");
  TrcTrace(Translate("_strTransferPositionTips50 = "), _strTransferPositionTips50);
  _strWastePositionTips1000 = Translate("Tips1000ulHighVolumeTipWithFilter_Waste");
  _strWastePositionTips300 = Translate("Tips300ulStandardVolumeTipWithFilter_Waste");
  _strWastePositionTips50 = Translate("Tips50ulTipWithFilter_Waste");
  _strGrowthPlateName = Translate("GrowthPlate");
  TrcTrace(Translate("_strGrowthPlateName = "), _strGrowthPlateName);
  _strDIWaterPlateName = Translate("DIWater");
  TrcTrace(Translate("_strDIWaterPlateName = "), _strDIWaterPlateName);
  _strTips300Name = Translate("Tips300");
  TrcTrace(Translate("_strTips300Name = "), _strTips300Name);
  _strTips50Name = Translate("Tips50");
  TrcTrace(Translate("_strTips50Name = "), _strTips50Name);
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Definitions : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function C_Pipetting(  ) void {
  private variable blnSuccess;
  private timer tmrSimModeLabwareRequestCompletionFileCreation;
  private variable strTransferPosition;
  private variable strInputTransferPositionLabwareName;
  private variable strInputTransferPositionOccupancy;
  private variable blnInputTransferPositionLabwareRequestComplete;
  private variable strThermoshakeErrorCode;
  private variable fltThermoshakeTemperature;
  private variable blnThermoshakeSuccess;
  private variable loopCounter2;
  private timer hdlThermoshakeTimer;
  private variable intTimeElapsed;
  private timer tmrVibrationWaste;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Pipetting : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
  blnSuccess = LABWAREHANDLING::RequestLabware(_strDIWaterPlateName, _strTransferPositionDIWaterPlate);
  TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
  if (_blnSimulationMode == 1)
  {
    if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    blnSuccess = LABWAREHANDLING::UtilityCreateLabwareRequestCompletionFile(_strDIWaterPlateName, _strTransferPositionDIWaterPlate);
    TrcTrace(Translate("-----Utility Create Labware Request Completion File  : blnSuccess = "), blnSuccess);
  }
  blnSuccess = LABWAREHANDLING::WaitForLabwareRequestCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
  TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
  blnInputTransferPositionLabwareRequestComplete = IF_AND_IF_OR::If_And_3_Variables(strTransferPosition, _strTransferPositionDIWaterPlate, strInputTransferPositionLabwareName, _strDIWaterPlateName, strInputTransferPositionOccupancy, Translate("1"));
  TrcTrace(Translate("-----blnInputTransferPositionLabwareRequestComplete = "), blnInputTransferPositionLabwareRequestComplete);
  if (blnInputTransferPositionLabwareRequestComplete == 0)
  {
    blnSuccess = RUNTIMEERRORHANDLING::TransportError();
    TrcTrace(Translate("-----RunTime error file creation blnSuccess = "), blnSuccess);
    abort;
  }
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
  blnSuccess = LABWAREHANDLING::RequestLabware(_strTips300Name, _strTransferPositionTips300);
  TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
  if (_blnSimulationMode == 1)
  {
    if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    blnSuccess = LABWAREHANDLING::UtilityCreateLabwareRequestCompletionFile(_strTips300Name, _strTransferPositionTips300);
    TrcTrace(Translate("-----Utility Create Labware Request Completion File  : blnSuccess = "), blnSuccess);
  }
  blnSuccess = LABWAREHANDLING::WaitForLabwareRequestCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
  TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
  blnInputTransferPositionLabwareRequestComplete = IF_AND_IF_OR::If_And_3_Variables(strTransferPosition, _strTransferPositionTips300, strInputTransferPositionLabwareName, _strTips300Name, strInputTransferPositionOccupancy, Translate("1"));
  TrcTrace(Translate("-----blnInputTransferPositionLabwareRequestComplete = "), blnInputTransferPositionLabwareRequestComplete);
  if (blnInputTransferPositionLabwareRequestComplete == 0)
  {
    blnSuccess = RUNTIMEERRORHANDLING::TransportError();
    TrcTrace(Translate("-----RunTime error file creation blnSuccess = "), blnSuccess);
    abort;
  }
  blnSuccess = TIPHANDLING::MoveTipRackWithCOREGrip_96HeadTipsOnly(ML_STAR, ML_STAR.COREGripTool_OnWaste_1000ul_0001, ML_STAR.Tips300ulStandardVolumeTipWithFilter_HandOff, ML_STAR.Tips300ulStandardVolumeTipWithFilter_96_1, 0);
  TrcTrace(Translate("-----Move tip rack with CORE grips : blnSuccess = "), blnSuccess);
  MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
  blnSuccess = LABWAREHANDLING::RequestLabware(_strTips50Name, _strTransferPositionTips50);
  TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
  if (_blnSimulationMode == 1)
  {
    if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    blnSuccess = LABWAREHANDLING::UtilityCreateLabwareRequestCompletionFile(_strTips50Name, _strTransferPositionTips50);
    TrcTrace(Translate("-----Utility Create Labware Request Completion File  : blnSuccess = "), blnSuccess);
  }
  blnSuccess = LABWAREHANDLING::WaitForLabwareRequestCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
  TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
  blnInputTransferPositionLabwareRequestComplete = IF_AND_IF_OR::If_And_3_Variables(strTransferPosition, _strTransferPositionTips50, strInputTransferPositionLabwareName, _strTips50Name, strInputTransferPositionOccupancy, Translate("1"));
  TrcTrace(Translate("-----blnInputTransferPositionLabwareRequestComplete = "), blnInputTransferPositionLabwareRequestComplete);
  if (blnInputTransferPositionLabwareRequestComplete == 0)
  {
    blnSuccess = RUNTIMEERRORHANDLING::TransportError();
    TrcTrace(Translate("-----RunTime error file creation blnSuccess = "), blnSuccess);
    abort;
  }
  blnSuccess = TIPHANDLING::MoveTipRackWithCOREGrip_96HeadTipsOnly(ML_STAR, ML_STAR.COREGripTool_OnWaste_1000ul_0001, ML_STAR.Tips50ulTipWithFilter_HandOff, ML_STAR.Tips50ulTipWithFilter_96_1, 1);
  TrcTrace(Translate("-----Move tip rack with CORE grips : blnSuccess = "), blnSuccess);
  {
    for(loopCounter2 = 0; loopCounter2 < 10;)
    {
      loopCounter2 = loopCounter2 + 1;
      blnThermoshakeSuccess = HSLInhecoTECLib::GetActualDeviceTemperature(_intThermoshakeControlID, _intThermoshakeDeviceID, 1, fltThermoshakeTemperature, strThermoshakeErrorCode);
      _ThermoshakeReturnHandle(blnThermoshakeSuccess, Translate("get actucal device temperature"));
      if (_blnSimulationMode == 1)
      {
        fltThermoshakeTemperature = 5.0;
      }
      TrcTrace(Translate("fltThermoshakeTemperature = "), fltThermoshakeTemperature);
      if (fltThermoshakeTemperature < 10.0)
      {
        break;
      }
      if( 0 == hdlThermoshakeTimer.SetTimer(30) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == hdlThermoshakeTimer.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if (loopCounter2 == 10)
      {
        TrcTrace4(Translate("--------------------------- Thermoshake error - "), Translate("failed to reach temperature, the method will abort"), Translate(" ---------------------------"), Translate(""));
        abort;
      }
    }
  }
  MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
  blnSuccess = LABWAREHANDLING::RequestLabware(_strGrowthPlateName, _strTransferPositionGrowthPlate);
  TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
  if (_blnSimulationMode == 1)
  {
    if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    blnSuccess = LABWAREHANDLING::UtilityCreateLabwareRequestCompletionFile(_strGrowthPlateName, _strTransferPositionGrowthPlate);
    TrcTrace(Translate("-----Utility Create Labware Request Completion File  : blnSuccess = "), blnSuccess);
  }
  blnSuccess = LABWAREHANDLING::WaitForLabwareRequestCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
  TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
  blnInputTransferPositionLabwareRequestComplete = IF_AND_IF_OR::If_And_3_Variables(strTransferPosition, _strTransferPositionGrowthPlate, strInputTransferPositionLabwareName, _strGrowthPlateName, strInputTransferPositionOccupancy, Translate("1"));
  TrcTrace(Translate("-----blnInputTransferPositionLabwareRequestComplete = "), blnInputTransferPositionLabwareRequestComplete);
  if (blnInputTransferPositionLabwareRequestComplete == 0)
  {
    blnSuccess = RUNTIMEERRORHANDLING::TransportError();
    TrcTrace(Translate("-----RunTime error file creation blnSuccess = "), blnSuccess);
    abort;
  }
  ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
  ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
  ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
  MOVE96HEADANDARM::Move96HeadToFront(ML_STAR);
  ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
  ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
  ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
  MOVE96HEADANDARM::Move96HeadToFront(ML_STAR);
  ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  WasteChute::WasteChuteShakeStart(ML_STAR, 1, 40, 1);
  if( 0 == tmrVibrationWaste.SetTimer(5) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  TIMER_WAIT_FOR_VARIABLE_INPUTS::TimerWaitFor(tmrVibrationWaste, _blnSimulationMode, _blnSimulationMode, intTimeElapsed);
  WasteChute::WasteChuteShakeStop(ML_STAR, 1);
  MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
  blnSuccess = LABWAREHANDLING::ReturnLabware(_strGrowthPlateName, _strTransferPositionGrowthPlate);
  TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
  if (_blnSimulationMode == 1)
  {
    if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    blnSuccess = LABWAREHANDLING::UtilityCreatLabwareReturnCompletionFile(_strGrowthPlateName, _strTransferPositionGrowthPlate);
    TrcTrace(Translate("-----Utility Create Labware Return Completion File  : blnSuccess = "), blnSuccess);
  }
  blnSuccess = LABWAREHANDLING::WaitForLabwareReturnCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
  TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
  blnSuccess = LABWAREHANDLING::ReturnLabware(_strDIWaterPlateName, _strTransferPositionDIWaterPlate);
  TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
  if (_blnSimulationMode == 1)
  {
    if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    blnSuccess = LABWAREHANDLING::UtilityCreatLabwareReturnCompletionFile(_strDIWaterPlateName, _strTransferPositionDIWaterPlate);
    TrcTrace(Translate("-----Utility Create Labware Return Completion File  : blnSuccess = "), blnSuccess);
  }
  blnSuccess = LABWAREHANDLING::WaitForLabwareReturnCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
  TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
  blnSuccess = TIPHANDLING::MoveTipRackWithCOREGrip_EmptyRackToWaste(ML_STAR, ML_STAR.COREGripTool_OnWaste_1000ul_0001, ML_STAR.Tips300ulStandardVolumeTipWithFilter_96_1, ML_STAR.Tips300ulStandardVolumeTipWithFilter_Waste, 0);
  TrcTrace(Translate("-----Move tip rack with CORE grips : blnSuccess = "), blnSuccess);
  blnSuccess = TIPHANDLING::MoveTipRackWithCOREGrip_EmptyRackToWaste(ML_STAR, ML_STAR.COREGripTool_OnWaste_1000ul_0001, ML_STAR.Tips50ulTipWithFilter_96_1, ML_STAR.Tips50ulTipWithFilter_Waste, 1);
  TrcTrace(Translate("-----Move tip rack with CORE grips : blnSuccess = "), blnSuccess);
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Pipetting : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function D_Cleanup(  ) void {
  private file hdlStatusFile;
  private variable blnMethodFinishedSuccessfully;
  private variable blnThermoshakeSuccess;
  private variable strThermoshakeErrorCode;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Cleanup : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  if (_blnAbortFlag == 0)
  {
    blnMethodFinishedSuccessfully = 1;
    MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
  }
  else
  {
    blnMethodFinishedSuccessfully = 0;
  }
  hdlStatusFile.AddField("Status", blnMethodFinishedSuccessfully, hslInteger);
  hdlStatusFile.SetDelimiter(hslCSVDelimited);
  if( 0 == hdlStatusFile.Open(_strFilepathStatus, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strFilepathStatus, "HxMetEdCompCmd");
  }
  if( 0 == hdlStatusFile.WriteRecord() )
  {
        MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 != hdlStatusFile.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  hdlStatusFile.RemoveFields();
  blnThermoshakeSuccess = HSLInhecoTECLib::StopTemperatureControl(_intThermoshakeControlID, _intThermoshakeDeviceID, strThermoshakeErrorCode);
  _ThermoshakeReturnHandle(blnThermoshakeSuccess, Translate("terminate"));
  blnThermoshakeSuccess = HSLInhecoTECLib::Terminate(1);
  _ThermoshakeReturnHandle(blnThermoshakeSuccess, Translate("terminate"));
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Cleanup : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function _VersionInfo(  ) void {
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   VersionInfo : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   VersionInfo : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function _ThermoshakeReturnHandle( variable i_blnSuccess, variable i_strCommandDescription ) void {
  private variable blnSuccess;
  private variable strLastError;
  private dialog customDialog_2;
  if (i_blnSuccess == 0)
  {
    HSLInhecoTECLib::GetLastError(strLastError);
    TrcTrace4(Translate("--------------------------- Thermoshake error - "), i_strCommandDescription, Translate(" ---------------------------"), Translate(""));
    TrcTrace4(Translate("--------------------------- Thermoshake error details - "), strLastError, Translate(" ---------------------------"), Translate(""));
    customDialog_2.InitCustomDialog("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");
    customDialog_2.SetCustomDialogProperty( "textBlock3.Text", i_strCommandDescription );
    customDialog_2.SetCustomDialogProperty( "textBlock6.Text", strLastError );
    customDialog_2.ShowCustomDialog();
    blnSuccess = HSLInhecoTECLib::Terminate(1);
    if (blnSuccess == 0)
    {
      HSLInhecoTECLib::GetLastError(strLastError);
      TrcTrace4(Translate("--------------------------- Thermoshake error - terminate"), Translate(" ---------------------------"), Translate(""), Translate(""));
    }
    abort;
  }
}
