private function A_Definitions(  ) void ;
private function B_Initialise(  ) void ;
private function C_Pipetting(  ) void ;
private function D_Cleanup(  ) void ;
private function _MediaLineReturnHandle( variable i_intReturnCode, variable i_strCommandDescription ) void ;
private function _VersionInfo(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  private dialog customDialog_1;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Aborting : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  customDialog_1.InitCustomDialog("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");
  customDialog_1.ShowCustomDialog();
  TrcTrace(Translate("------------------------------------ Recovery method filepath - C:\Program Files (x86)\HAMILTON\Methods\[MPE]2\96head crash recovery.med ------------------------------------"), Translate(""));
  _blnAbortFlag = 1;
  D_Cleanup();
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Aborting : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function B_Initialise(  ) void {
  private variable intMediaLineReturn;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Initialise : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  _blnSimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
  TrcTrace(Translate("_blnSimulationMode = "), _blnSimulationMode);
  if (_blnSimulationMode == 1)
  {
    _intSimulationMode = 1;
  }
  else
  {
    _intSimulationMode = 0;
  }
  intMediaLineReturn = HSLHamiltonMediaFillModule::Initialize(_intMediaLineCOMPort, _intSimulationMode, _intMediaLineInstrumentID);
  TrcTrace(Translate("_intMediaLineInstrumentID = "), _intMediaLineInstrumentID);
  intMediaLineReturn = HSLHamiltonMediaFillModule::SetPumpDirection(_intMediaLineInstrumentID, _intMediaLinePumpID, 0);
  intMediaLineReturn = HSLHamiltonMediaFillModule::FillTrough(_intMediaLineInstrumentID, _intMediaLinePumpID, 75, 1);
  _MediaLineReturnHandle(intMediaLineReturn, Translate("fill trough"));
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Initialise : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function A_Definitions(  ) void {
  private variable blnSuccess;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Definitions : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  _intMediaLineCOMPort = 8;
  TrcTrace(Translate("_intMediaLineCOMPort = "), _intMediaLineCOMPort);
  _intMediaLinePumpID = 2;
  TrcTrace(Translate("_intMediaLinePumpID = "), _intMediaLinePumpID);
  _strFilepathStatus = Translate("C:\\HamiltonOutputFiles\\HamiltonStatus.csv");
  TrcTrace(Translate("_strFilepathStatus = "), _strFilepathStatus);
  blnSuccess = FileDirectoryLib::CheckIfFileExists(_strFilepathStatus);
  if (blnSuccess == 1)
  {
    FileDirectoryLib::DeleteFile(_strFilepathStatus);
  }
  _strTransferPositionPCRPlate = Translate("PlateHandOff");
  TrcTrace(Translate("_strTransferPositionPCRPlate = "), _strTransferPositionPCRPlate);
  _strTransferPositionTips1000 = Translate("TipsHandOff");
  TrcTrace(Translate("_strTransferPositionTips1000 = "), _strTransferPositionTips1000);
  _strTransferPositionTips1000Empty = Translate("TipsHandOff");
  TrcTrace(Translate("_strTransferPositionTips1000Empty = "), _strTransferPositionTips1000Empty);
  _strWastePositionTips1000 = Translate("Tips1000ulHighVolumeTipWithFilter_Waste");
  _strWastePositionTips300 = Translate("Tips300ulStandardVolumeTipWithFilter_Waste");
  _strWastePositionTips50 = Translate("Tips50ulTipWithFilter_Waste");
  _strPCRPlateName = Translate("PCRPlate");
  TrcTrace(Translate("_strPCRPlateName = "), _strPCRPlateName);
  _strTips1000Name = Translate("Tips1000");
  TrcTrace(Translate("_strTips1000Name = "), _strTips1000Name);
  _strTips1000EmptyName = Translate("Tips1000Empty");
  TrcTrace(Translate("_strTips1000EmptyName = "), _strTips1000EmptyName);
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Definitions : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function C_Pipetting(  ) void {
  private variable intMediaLineReturn;
  private variable blnSuccess;
  private timer tmrSimModeLabwareRequestCompletionFileCreation;
  private variable strTransferPosition;
  private variable strInputTransferPositionLabwareName;
  private variable strInputTransferPositionOccupancy;
  private variable blnInputTransferPositionLabwareRequestComplete;
  private variable loopCounter1;
  private variable loopCounter2;
  private variable intReplaceTips;
  private variable fltVolumePerWell;
  private variable fltVolumePreAliquot;
  private variable intMaxVolumePerTip;
  private variable fltVolumePostAliquot;
  private variable intNumberOfChannels;
  private variable intNumberOfDispenses;
  private variable fltVolumeToAspirate;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Pipetting : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
  intReplaceTips = TIPHANDLING::CheckAvailableTipsFromDeck(ML_STAR, ML_STAR.Tips1000ulHighVolumeTipWithFilter_Partial, 8, 1000);
  TrcTrace(Translate("-----Replace tips  : intReplaceTips = "), intReplaceTips);
  if (intReplaceTips > 0)
  {
    if (intReplaceTips == 1)
    {
      blnSuccess = LABWAREHANDLING::RequestLabware(_strTips1000EmptyName, _strTransferPositionTips1000Empty);
      TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
      if (_blnSimulationMode == 1)
      {
        if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        blnSuccess = LABWAREHANDLING::UtilityCreateLabwareRequestCompletionFile(_strTips1000EmptyName, _strTransferPositionTips1000Empty);
        TrcTrace(Translate("-----Utility Create Labware Request Completion File  : blnSuccess = "), blnSuccess);
      }
      blnSuccess = LABWAREHANDLING::WaitForLabwareRequestCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
      TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
      blnInputTransferPositionLabwareRequestComplete = IF_AND_IF_OR::If_And_3_Variables(strTransferPosition, _strTransferPositionTips1000Empty, strInputTransferPositionLabwareName, _strTips1000EmptyName, strInputTransferPositionOccupancy, Translate("1"));
      TrcTrace(Translate("-----blnInputTransferPositionLabwareRequestComplete = "), blnInputTransferPositionLabwareRequestComplete);
      if (blnInputTransferPositionLabwareRequestComplete == 0)
      {
        blnSuccess = RUNTIMEERRORHANDLING::TransportError();
        TrcTrace(Translate("-----RunTime error file creation blnSuccess = "), blnSuccess);
        abort;
      }
      TIPHANDLING::Reset1000ulTipRackAfterOverlordReplacement(ML_STAR, ML_STAR.Tips1000ulHighVolumeTipWithFilter_Partial);
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
      blnSuccess = LABWAREHANDLING::ReturnLabware(_strTips1000Name, _strTransferPositionTips1000);
      TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
      if (_blnSimulationMode == 1)
      {
        if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        blnSuccess = LABWAREHANDLING::UtilityCreatLabwareReturnCompletionFile(_strTips1000Name, _strTransferPositionTips1000);
        TrcTrace(Translate("-----Utility Create Labware Return Completion File  : blnSuccess = "), blnSuccess);
      }
      blnSuccess = LABWAREHANDLING::WaitForLabwareReturnCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
      TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
    }
    blnSuccess = LABWAREHANDLING::RequestLabware(_strTips1000Name, _strTransferPositionTips1000);
    TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
    if (_blnSimulationMode == 1)
    {
      if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      blnSuccess = LABWAREHANDLING::UtilityCreateLabwareRequestCompletionFile(_strTips1000Name, _strTransferPositionTips1000);
      TrcTrace(Translate("-----Utility Create Labware Request Completion File  : blnSuccess = "), blnSuccess);
    }
    blnSuccess = LABWAREHANDLING::WaitForLabwareRequestCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
    TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
    blnInputTransferPositionLabwareRequestComplete = IF_AND_IF_OR::If_And_3_Variables(strTransferPosition, _strTransferPositionTips1000, strInputTransferPositionLabwareName, _strTips1000Name, strInputTransferPositionOccupancy, Translate("1"));
    TrcTrace(Translate("-----blnInputTransferPositionLabwareRequestComplete = "), blnInputTransferPositionLabwareRequestComplete);
    if (blnInputTransferPositionLabwareRequestComplete == 0)
    {
      blnSuccess = RUNTIMEERRORHANDLING::TransportError();
      TrcTrace(Translate("-----RunTime error file creation blnSuccess = "), blnSuccess);
      abort;
    }
    TIPHANDLING::Reset1000ulTipRackAfterOverlordReplacement(ML_STAR, ML_STAR.Tips1000ulHighVolumeTipWithFilter_Partial);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
    blnSuccess = LABWAREHANDLING::ReturnLabware(_strTips1000Name, _strTransferPositionTips1000);
    TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
    if (_blnSimulationMode == 1)
    {
      if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      blnSuccess = LABWAREHANDLING::UtilityCreatLabwareReturnCompletionFile(_strTips1000Name, _strTransferPositionTips1000);
      TrcTrace(Translate("-----Utility Create Labware Return Completion File  : blnSuccess = "), blnSuccess);
    }
    blnSuccess = LABWAREHANDLING::WaitForLabwareReturnCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
    TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
  }
  MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
  blnSuccess = LABWAREHANDLING::RequestLabware(_strPCRPlateName, _strTransferPositionPCRPlate);
  TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
  if (_blnSimulationMode == 1)
  {
    if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    blnSuccess = LABWAREHANDLING::UtilityCreateLabwareRequestCompletionFile(_strPCRPlateName, _strTransferPositionPCRPlate);
    TrcTrace(Translate("-----Utility Create Labware Request Completion File  : blnSuccess = "), blnSuccess);
  }
  blnSuccess = LABWAREHANDLING::WaitForLabwareRequestCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
  TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
  blnInputTransferPositionLabwareRequestComplete = IF_AND_IF_OR::If_And_3_Variables(strTransferPosition, _strTransferPositionPCRPlate, strInputTransferPositionLabwareName, _strPCRPlateName, strInputTransferPositionOccupancy, Translate("1"));
  TrcTrace(Translate("-----blnInputTransferPositionLabwareRequestComplete = "), blnInputTransferPositionLabwareRequestComplete);
  if (blnInputTransferPositionLabwareRequestComplete == 0)
  {
    blnSuccess = RUNTIMEERRORHANDLING::TransportError();
    TrcTrace(Translate("-----RunTime error file creation blnSuccess = "), blnSuccess);
    abort;
  }
  intMediaLineReturn = HSLHamiltonMediaFillModule::FillTrough(_intMediaLineInstrumentID, _intMediaLinePumpID, 75, 60);
  _MediaLineReturnHandle(intMediaLineReturn, Translate("fill trough"));
  intMediaLineReturn = HSLHamiltonMediaFillModule::WaitForPump(_intMediaLineInstrumentID, _intMediaLinePumpID);
  _MediaLineReturnHandle(intMediaLineReturn, Translate("wait for pump"));
  fltVolumePerWell = 50;
  fltVolumePreAliquot = 50;
  fltVolumePostAliquot = 50;
  intMaxVolumePerTip = 1000;
  intNumberOfChannels = 8;
  ML_STAR.MediaLine2.SetCurrentPosition(89);
  {
    loopCounter1 = 0;
    while (
       (ML_STAR.PCRPlate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.PCRPlate, 1);
      loopCounter1 = loopCounter1 + 1;
      ALIQUOT_WITH_EASYSTEPS::CalcAliquote(ML_STAR.PCRPlate, fltVolumePerWell, fltVolumePreAliquot, fltVolumePostAliquot, intMaxVolumePerTip, fltVolumeToAspirate, intNumberOfDispenses, 1, intNumberOfChannels);
      onerror goto errLabel_2 ;
      err.Clear();
      {
        	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
      }
      errLabel_2 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        intMediaLineReturn = HSLHamiltonMediaFillModule::FillTrough(_intMediaLineInstrumentID, _intMediaLinePumpID, 75, 60);
        _MediaLineReturnHandle(intMediaLineReturn, Translate("fill trough"));
        intMediaLineReturn = HSLHamiltonMediaFillModule::WaitForPump(_intMediaLineInstrumentID, _intMediaLinePumpID);
        _MediaLineReturnHandle(intMediaLineReturn, Translate("wait for pump"));
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
      }   /* end if from skip handler if no error */
      {
        	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
      }
      {
        for(loopCounter2 = 0; loopCounter2 < intNumberOfDispenses;)
        {
          loopCounter2 = loopCounter2 + 1;
          {
            	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
          }
        }
      }
      {
        	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
      }
      if (
         (ML_STAR.PCRPlate.GetCurrentPosition() > 0 && ML_STAR.PCRPlate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.PCRPlate.SetMax(ML_STAR.PCRPlate.GetTotal());
    ML_STAR.PCRPlate.SetCurrentPosition(1);
  }
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
  blnSuccess = LABWAREHANDLING::ReturnLabware(_strPCRPlateName, _strTransferPositionPCRPlate);
  TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
  if (_blnSimulationMode == 1)
  {
    if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    blnSuccess = LABWAREHANDLING::UtilityCreatLabwareReturnCompletionFile(_strPCRPlateName, _strTransferPositionPCRPlate);
    TrcTrace(Translate("-----Utility Create Labware Return Completion File  : blnSuccess = "), blnSuccess);
  }
  blnSuccess = LABWAREHANDLING::WaitForLabwareReturnCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
  TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Pipetting : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function D_Cleanup(  ) void {
  private variable intMediaLineReturn;
  private file hdlStatusFile;
  private variable blnMethodFinishedSuccessfully;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Cleanup : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  if (_blnAbortFlag == 0)
  {
    blnMethodFinishedSuccessfully = 1;
    MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
  }
  else
  {
    blnMethodFinishedSuccessfully = 0;
  }
  hdlStatusFile.AddField("Status", blnMethodFinishedSuccessfully, hslInteger);
  hdlStatusFile.SetDelimiter(hslCSVDelimited);
  if( 0 == hdlStatusFile.Open(_strFilepathStatus, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strFilepathStatus, "HxMetEdCompCmd");
  }
  if( 0 == hdlStatusFile.WriteRecord() )
  {
        MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 != hdlStatusFile.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  hdlStatusFile.RemoveFields();
  intMediaLineReturn = HSLHamiltonMediaFillModule::Disconnect(_intMediaLineInstrumentID);
  _MediaLineReturnHandle(intMediaLineReturn, Translate("disconnect"));
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Cleanup : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function _VersionInfo(  ) void {
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   VersionInfo : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   VersionInfo : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function _MediaLineReturnHandle( variable i_intReturnCode, variable i_strCommandDescription ) void {
  private dialog customDialog_3;
  if(0){
    if (i_intReturnCode == 1)
    {
      TrcTrace4(Translate("--------------------------- Media line error - "), i_strCommandDescription, Translate(" ---------------------------"), Translate(""));
      customDialog_3.InitCustomDialog("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");
      customDialog_3.SetCustomDialogProperty( "textBlock3.Text", i_strCommandDescription );
      customDialog_3.ShowCustomDialog();
      abort;
    }
  }
}
