private function A_Definitions(  ) void ;
private function B_Initialise(  ) void ;
private function C_Pipetting(  ) void ;
private function D_Cleanup(  ) void ;
private function _VersionInfo(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  private dialog customDialog_1;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Aborting : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  customDialog_1.InitCustomDialog("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");
  customDialog_1.ShowCustomDialog();
  TrcTrace(Translate("------------------------------------ Recovery method filepath - C:\Program Files (x86)\HAMILTON\Methods\[MPE]2\96head crash recovery.med ------------------------------------"), Translate(""));
  _blnAbortFlag = 1;
  D_Cleanup();
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Aborting : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function B_Initialise(  ) void {
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Initialise : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  _blnSimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
  TrcTrace(Translate("_blnSimulationMode = "), _blnSimulationMode);
  if (_blnSimulationMode == 1)
  {
    _intSimulationMode = 1;
  }
  else
  {
    _intSimulationMode = 0;
  }
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Initialise : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function A_Definitions(  ) void {
  private variable blnSuccess;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Definitions : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  _strFilepathStatus = Translate("C:\\HamiltonOutputFiles\\HamiltonStatus.csv");
  TrcTrace(Translate("_strFilepathStatus = "), _strFilepathStatus);
  blnSuccess = FileDirectoryLib::CheckIfFileExists(_strFilepathStatus);
  if (blnSuccess == 1)
  {
    FileDirectoryLib::DeleteFile(_strFilepathStatus);
  }
  _strTransferPositionPCRPlate = Translate("PlateHandOff");
  TrcTrace(Translate("_strTransferPositionPCRPlate = "), _strTransferPositionPCRPlate);
  _strTransferPositionElectroporationPlate = Translate("PlateHandOff");
  TrcTrace(Translate("_strTransferPositionElectroporationPlate = "), _strTransferPositionElectroporationPlate);
  _strTransferPositionTips50 = Translate("TipsHandOff");
  TrcTrace(Translate("_strTransferPositionTips50 = "), _strTransferPositionTips50);
  _strWastePositionTips1000 = Translate("Tips1000ulHighVolumeTipWithFilter_Waste");
  _strWastePositionTips300 = Translate("Tips300ulStandardVolumeTipWithFilter_Waste");
  _strWastePositionTips50 = Translate("Tips50ulTipWithFilter_Waste");
  _strPCRPlateName = Translate("PCRPlate");
  TrcTrace(Translate("_strPCRPlateName = "), _strPCRPlateName);
  _strElectroporationPlateName = Translate("ElectroporationPlate");
  TrcTrace(Translate("_strElectroporationPlateName = "), _strElectroporationPlateName);
  _strTips50Name = Translate("Tips50");
  TrcTrace(Translate("_strTips50Name = "), _strTips50Name);
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Definitions : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function C_Pipetting(  ) void {
  private variable blnSuccess;
  private timer tmrSimModeLabwareRequestCompletionFileCreation;
  private variable strTransferPosition;
  private variable strInputTransferPositionLabwareName;
  private variable strInputTransferPositionOccupancy;
  private variable blnInputTransferPositionLabwareRequestComplete;
  private variable intTimeElapsed;
  private timer tmrVibrationWaste;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Pipetting : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
  blnSuccess = LABWAREHANDLING::RequestLabware(_strTips50Name, _strTransferPositionTips50);
  TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
  if (_blnSimulationMode == 1)
  {
    if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    blnSuccess = LABWAREHANDLING::UtilityCreateLabwareRequestCompletionFile(_strTips50Name, _strTransferPositionTips50);
    TrcTrace(Translate("-----Utility Create Labware Request Completion File  : blnSuccess = "), blnSuccess);
  }
  blnSuccess = LABWAREHANDLING::WaitForLabwareRequestCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
  TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
  blnInputTransferPositionLabwareRequestComplete = IF_AND_IF_OR::If_And_3_Variables(strTransferPosition, _strTransferPositionTips50, strInputTransferPositionLabwareName, _strTips50Name, strInputTransferPositionOccupancy, Translate("1"));
  TrcTrace(Translate("-----blnInputTransferPositionLabwareRequestComplete = "), blnInputTransferPositionLabwareRequestComplete);
  if (blnInputTransferPositionLabwareRequestComplete == 0)
  {
    blnSuccess = RUNTIMEERRORHANDLING::TransportError();
    TrcTrace(Translate("-----RunTime error file creation blnSuccess = "), blnSuccess);
    abort;
  }
  blnSuccess = TIPHANDLING::MoveTipRackWithCOREGrip_96HeadTipsOnly(ML_STAR, ML_STAR.COREGripTool_OnWaste_1000ul_0001, ML_STAR.Tips50ulTipWithFilter_HandOff, ML_STAR.Tips50ulTipWithFilter_96_1, 0);
  TrcTrace(Translate("-----Move tip rack with CORE grips : blnSuccess = "), blnSuccess);
  MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
  blnSuccess = LABWAREHANDLING::RequestLabware(_strElectroporationPlateName, _strTransferPositionElectroporationPlate);
  TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
  if (_blnSimulationMode == 1)
  {
    if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    blnSuccess = LABWAREHANDLING::UtilityCreateLabwareRequestCompletionFile(_strElectroporationPlateName, _strTransferPositionElectroporationPlate);
    TrcTrace(Translate("-----Utility Create Labware Request Completion File  : blnSuccess = "), blnSuccess);
  }
  blnSuccess = LABWAREHANDLING::WaitForLabwareRequestCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
  TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
  blnInputTransferPositionLabwareRequestComplete = IF_AND_IF_OR::If_And_3_Variables(strTransferPosition, _strTransferPositionElectroporationPlate, strInputTransferPositionLabwareName, _strElectroporationPlateName, strInputTransferPositionOccupancy, Translate("1"));
  TrcTrace(Translate("-----blnInputTransferPositionLabwareRequestComplete = "), blnInputTransferPositionLabwareRequestComplete);
  if (blnInputTransferPositionLabwareRequestComplete == 0)
  {
    blnSuccess = RUNTIMEERRORHANDLING::TransportError();
    TrcTrace(Translate("-----RunTime error file creation blnSuccess = "), blnSuccess);
    abort;
  }
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
  blnSuccess = LABWAREHANDLING::RequestLabware(_strPCRPlateName, _strTransferPositionPCRPlate);
  TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
  if (_blnSimulationMode == 1)
  {
    if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    blnSuccess = LABWAREHANDLING::UtilityCreateLabwareRequestCompletionFile(_strPCRPlateName, _strTransferPositionPCRPlate);
    TrcTrace(Translate("-----Utility Create Labware Request Completion File  : blnSuccess = "), blnSuccess);
  }
  blnSuccess = LABWAREHANDLING::WaitForLabwareRequestCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
  TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
  blnInputTransferPositionLabwareRequestComplete = IF_AND_IF_OR::If_And_3_Variables(strTransferPosition, _strTransferPositionPCRPlate, strInputTransferPositionLabwareName, _strPCRPlateName, strInputTransferPositionOccupancy, Translate("1"));
  TrcTrace(Translate("-----blnInputTransferPositionLabwareRequestComplete = "), blnInputTransferPositionLabwareRequestComplete);
  if (blnInputTransferPositionLabwareRequestComplete == 0)
  {
    blnSuccess = RUNTIMEERRORHANDLING::TransportError();
    TrcTrace(Translate("-----RunTime error file creation blnSuccess = "), blnSuccess);
    abort;
  }
  ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
  ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
  ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
  MOVE96HEADANDARM::Move96HeadToFront(ML_STAR);
  ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  WasteChute::WasteChuteShakeStart(ML_STAR, 1, 40, 1);
  if( 0 == tmrVibrationWaste.SetTimer(5) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  TIMER_WAIT_FOR_VARIABLE_INPUTS::TimerWaitFor(tmrVibrationWaste, _blnSimulationMode, _blnSimulationMode, intTimeElapsed);
  WasteChute::WasteChuteShakeStop(ML_STAR, 1);
  MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
  blnSuccess = LABWAREHANDLING::ReturnLabware(_strPCRPlateName, _strTransferPositionPCRPlate);
  TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
  if (_blnSimulationMode == 1)
  {
    if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    blnSuccess = LABWAREHANDLING::UtilityCreatLabwareReturnCompletionFile(_strPCRPlateName, _strTransferPositionPCRPlate);
    TrcTrace(Translate("-----Utility Create Labware Return Completion File  : blnSuccess = "), blnSuccess);
  }
  blnSuccess = LABWAREHANDLING::WaitForLabwareReturnCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
  TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
  blnSuccess = LABWAREHANDLING::ReturnLabware(_strElectroporationPlateName, _strTransferPositionElectroporationPlate);
  TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
  if (_blnSimulationMode == 1)
  {
    if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    blnSuccess = LABWAREHANDLING::UtilityCreatLabwareReturnCompletionFile(_strElectroporationPlateName, _strTransferPositionElectroporationPlate);
    TrcTrace(Translate("-----Utility Create Labware Return Completion File  : blnSuccess = "), blnSuccess);
  }
  blnSuccess = LABWAREHANDLING::WaitForLabwareReturnCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
  TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
  blnSuccess = TIPHANDLING::MoveTipRackWithCOREGrip_EmptyRackToWaste(ML_STAR, ML_STAR.COREGripTool_OnWaste_1000ul_0001, ML_STAR.Tips50ulTipWithFilter_96_1, ML_STAR.Tips50ulTipWithFilter_Waste, 1);
  TrcTrace(Translate("-----Move tip rack with CORE grips : blnSuccess = "), blnSuccess);
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Pipetting : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function D_Cleanup(  ) void {
  private file hdlStatusFile;
  private variable blnMethodFinishedSuccessfully;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Cleanup : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  if (_blnAbortFlag == 0)
  {
    blnMethodFinishedSuccessfully = 1;
    MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
  }
  else
  {
    blnMethodFinishedSuccessfully = 0;
  }
  hdlStatusFile.AddField("Status", blnMethodFinishedSuccessfully, hslInteger);
  hdlStatusFile.SetDelimiter(hslCSVDelimited);
  if( 0 == hdlStatusFile.Open(_strFilepathStatus, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strFilepathStatus, "HxMetEdCompCmd");
  }
  if( 0 == hdlStatusFile.WriteRecord() )
  {
        MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 != hdlStatusFile.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  hdlStatusFile.RemoveFields();
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Cleanup : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function _VersionInfo(  ) void {
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   VersionInfo : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   VersionInfo : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}
