private function A_Definitions(  ) void ;
private function B_Initialise(  ) void ;
private function C_Pipetting(  ) void ;
private function D_Cleanup(  ) void ;
private function _MPE2ReturnHandle( variable i_intMPE2ID, variable i_blnReturnCode, variable i_strCommandDescription ) void ;
private function _MediaLineReturnHandle( variable i_intReturnCode, variable i_strCommandDescription ) void ;
private function _VersionInfo(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  private dialog customDialog_1;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Aborting : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  customDialog_1.InitCustomDialog("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");
  customDialog_1.ShowCustomDialog();
  TrcTrace(Translate("------------------------------------ Recovery method filepath - C:\Program Files (x86)\HAMILTON\Methods\[MPE]2\96head crash recovery.med ------------------------------------"), Translate(""));
  _blnAbortFlag = 1;
  D_Cleanup();
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Aborting : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function B_Initialise(  ) void {
  private variable intMediaLineReturn;
  private variable blnMPE2Return;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Initialise : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  _blnSimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
  TrcTrace(Translate("_blnSimulationMode = "), _blnSimulationMode);
  if (_blnSimulationMode == 1)
  {
    _intSimulationMode = 1;
  }
  else
  {
    _intSimulationMode = 0;
  }
  intMediaLineReturn = HSLHamiltonMediaFillModule::Initialize(_intMediaLineCOMPort, _intSimulationMode, _intMediaLineInstrumentID);
  TrcTrace(Translate("_intMediaLineInstrumentID = "), _intMediaLineInstrumentID);
  TrcTrace(Translate("intMediaLineReturn = "), intMediaLineReturn);
  intMediaLineReturn = HSLHamiltonMediaFillModule::SetPumpDirection(_intMediaLineInstrumentID, _intMediaLinePumpID, 0);
  intMediaLineReturn = HSLHamiltonMediaFillModule::FillTrough(_intMediaLineInstrumentID, _intMediaLinePumpID, 75, 1);
  _MediaLineReturnHandle(intMediaLineReturn, Translate("fill trough"));
  blnMPE2Return = HSLMPELib::ConnectUsingCOM(_intMPE2COMPort, 921600, _blnSimulationMode, _intMPE2DeviceID);
  blnMPE2Return = HSLMPELib::Initialize(_intMPE2DeviceID);
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Initialise : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function A_Definitions(  ) void {
  private variable blnSuccess;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Definitions : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  _intMediaLineCOMPort = 8;
  TrcTrace(Translate("_intMediaLineCOMPort = "), _intMediaLineCOMPort);
  _intMediaLinePumpID = 1;
  TrcTrace(Translate("_intMediaLinePumpID = "), _intMediaLinePumpID);
  _intMPE2COMPort = 7;
  _fltMPE2FilterPlateHeight = 19.8;
  _fltMPE2NozzleHeight = 23.4;
  _intMPE2WasteContainer = 0;
  _fltMPE2CollectionPlateHeight = 14.3;
  _fltMPE2OffsetFromNozzles = 0;
  _strMPE2ParametersLoad = Translate("pressure,40,10");
  _strMPE2ParametersWash = Translate("pressure,40,10");
  _strMPE2ParametersElute = Translate("pressure,40,10");
  _strFilepathStatus = Translate("C:\\HamiltonOutputFiles\\HamiltonStatus.csv");
  TrcTrace(Translate("_strFilepathStatus = "), _strFilepathStatus);
  MECC::TraceComment(Translate("Delete status file"));
  if(0){
    blnSuccess = FileDirectoryLib::CheckIfFileExists(_strFilepathStatus);
    if (blnSuccess == 1)
    {
      MECC::TraceComment(Translate("marker 2"));
      FileDirectoryLib::DeleteFile(_strFilepathStatus);
    }
  }
  _strTransferPositionFilterPlate = Translate("PlateHandOff");
  TrcTrace(Translate("_strTransferPositionFilterPlate = "), _strTransferPositionFilterPlate);
  _strTransferPositionElectroporationPlate = Translate("PlateHandOff");
  TrcTrace(Translate("_strTransferPositionElectroporationPlate = "), _strTransferPositionElectroporationPlate);
  _strTransferPositionTips1000 = Translate("TipsHandOff");
  TrcTrace(Translate("_strTransferPositionTips1000 = "), _strTransferPositionTips1000);
  _strTransferPositionTips300 = Translate("TipsHandOff");
  TrcTrace(Translate("_strTransferPositionTips300 = "), _strTransferPositionTips300);
  _strTransferPositionTips50 = Translate("TipsHandOff");
  TrcTrace(Translate("_strTransferPositionTips50 = "), _strTransferPositionTips50);
  _strWastePositionTips1000 = Translate("Tips1000ulHighVolumeTipWithFilter_Waste");
  _strWastePositionTips300 = Translate("Tips300ulStandardVolumeTipWithFilter_Waste");
  _strWastePositionTips50 = Translate("Tips50ulTipWithFilter_Waste");
  _strFilterPlateName = Translate("FilterPlate");
  TrcTrace(Translate("_strFilterPlateName = "), _strFilterPlateName);
  _strElectroporationPlateName = Translate("ElectroporationPlate");
  TrcTrace(Translate("_strElectroporationPlateName = "), _strElectroporationPlateName);
  _strTips1000Name = Translate("Tips1000");
  TrcTrace(Translate("_strTips1000Name = "), _strTips1000Name);
  _strTips300Name = Translate("Tips300");
  TrcTrace(Translate("_strTips300Name = "), _strTips300Name);
  _strTips50Name = Translate("Tips50");
  TrcTrace(Translate("_strTips50Name = "), _strTips50Name);
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Definitions : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function C_Pipetting(  ) void {
  private variable intMediaLineReturn;
  private variable blnSuccess;
  private timer tmrSimModeLabwareRequestCompletionFileCreation;
  private variable strTransferPosition;
  private variable strInputTransferPositionLabwareName;
  private variable strInputTransferPositionOccupancy;
  private variable blnInputTransferPositionLabwareRequestComplete;
  private variable intTimeElapsed;
  private timer tmrVibrationWaste;
  private variable blnMPE2Return;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Pipetting : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  if(0){
    MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
    blnSuccess = LABWAREHANDLING::RequestLabware(_strTips50Name, _strTransferPositionTips50);
    TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
    if (_blnSimulationMode == 1)
    {
      if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      blnSuccess = LABWAREHANDLING::UtilityCreateLabwareRequestCompletionFile(_strTips50Name, _strTransferPositionTips50);
      TrcTrace(Translate("-----Utility Create Labware Request Completion File  : blnSuccess = "), blnSuccess);
    }
    blnSuccess = LABWAREHANDLING::WaitForLabwareRequestCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
    TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
    blnInputTransferPositionLabwareRequestComplete = IF_AND_IF_OR::If_And_3_Variables(strTransferPosition, _strTransferPositionTips50, strInputTransferPositionLabwareName, _strTips50Name, strInputTransferPositionOccupancy, Translate("1"));
    TrcTrace(Translate("-----blnInputTransferPositionLabwareRequestComplete = "), blnInputTransferPositionLabwareRequestComplete);
    if (blnInputTransferPositionLabwareRequestComplete == 0)
    {
      blnSuccess = RUNTIMEERRORHANDLING::TransportError();
      TrcTrace(Translate("-----RunTime error file creation blnSuccess = "), blnSuccess);
      abort;
    }
    blnSuccess = TIPHANDLING::MoveTipRackWithCOREGrip_96HeadTipsOnly(ML_STAR, ML_STAR.COREGripTool_OnWaste_1000ul_0001, ML_STAR.Tips50ulTipWithFilter_HandOff, ML_STAR.Tips50ulTipWithFilter_96_1, 0);
    TrcTrace(Translate("-----Move tip rack with CORE grips : blnSuccess = "), blnSuccess);
    MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
    blnSuccess = LABWAREHANDLING::RequestLabware(_strTips300Name, _strTransferPositionTips300);
    TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
    if (_blnSimulationMode == 1)
    {
      if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      blnSuccess = LABWAREHANDLING::UtilityCreateLabwareRequestCompletionFile(_strTips300Name, _strTransferPositionTips300);
      TrcTrace(Translate("-----Utility Create Labware Request Completion File  : blnSuccess = "), blnSuccess);
    }
    blnSuccess = LABWAREHANDLING::WaitForLabwareRequestCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
    TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
    blnInputTransferPositionLabwareRequestComplete = IF_AND_IF_OR::If_And_3_Variables(strTransferPosition, _strTransferPositionTips300, strInputTransferPositionLabwareName, _strTips300Name, strInputTransferPositionOccupancy, Translate("1"));
    TrcTrace(Translate("-----blnInputTransferPositionLabwareRequestComplete = "), blnInputTransferPositionLabwareRequestComplete);
    if (blnInputTransferPositionLabwareRequestComplete == 0)
    {
      blnSuccess = RUNTIMEERRORHANDLING::TransportError();
      TrcTrace(Translate("-----RunTime error file creation blnSuccess = "), blnSuccess);
      abort;
    }
    blnSuccess = TIPHANDLING::MoveTipRackWithCOREGrip_96HeadTipsOnly(ML_STAR, ML_STAR.COREGripTool_OnWaste_1000ul_0001, ML_STAR.Tips300ulStandardVolumeTipWithFilter_HandOff, ML_STAR.Tips300ulStandardVolumeTipWithFilter_96_1, 0);
    TrcTrace(Translate("-----Move tip rack with CORE grips : blnSuccess = "), blnSuccess);
    MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
    blnSuccess = LABWAREHANDLING::RequestLabware(_strTips1000Name, _strTransferPositionTips1000);
    TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
    if (_blnSimulationMode == 1)
    {
      if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      blnSuccess = LABWAREHANDLING::UtilityCreateLabwareRequestCompletionFile(_strTips1000Name, _strTransferPositionTips1000);
      TrcTrace(Translate("-----Utility Create Labware Request Completion File  : blnSuccess = "), blnSuccess);
    }
    blnSuccess = LABWAREHANDLING::WaitForLabwareRequestCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
    TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
    blnInputTransferPositionLabwareRequestComplete = IF_AND_IF_OR::If_And_3_Variables(strTransferPosition, _strTransferPositionTips1000, strInputTransferPositionLabwareName, _strTips1000Name, strInputTransferPositionOccupancy, Translate("1"));
    TrcTrace(Translate("-----blnInputTransferPositionLabwareRequestComplete = "), blnInputTransferPositionLabwareRequestComplete);
    if (blnInputTransferPositionLabwareRequestComplete == 0)
    {
      blnSuccess = RUNTIMEERRORHANDLING::TransportError();
      TrcTrace(Translate("-----RunTime error file creation blnSuccess = "), blnSuccess);
      abort;
    }
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
    blnSuccess = LABWAREHANDLING::ReturnLabware(_strTips1000Name, _strTransferPositionTips1000);
    TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
    if (_blnSimulationMode == 1)
    {
      if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      blnSuccess = LABWAREHANDLING::UtilityCreatLabwareReturnCompletionFile(_strTips1000Name, _strTransferPositionTips1000);
      TrcTrace(Translate("-----Utility Create Labware Return Completion File  : blnSuccess = "), blnSuccess);
    }
    blnSuccess = LABWAREHANDLING::WaitForLabwareReturnCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
    TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
    MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
    blnSuccess = LABWAREHANDLING::RequestLabware(_strElectroporationPlateName, _strTransferPositionElectroporationPlate);
    TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
    if (_blnSimulationMode == 1)
    {
      if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      blnSuccess = LABWAREHANDLING::UtilityCreateLabwareRequestCompletionFile(_strElectroporationPlateName, _strTransferPositionElectroporationPlate);
      TrcTrace(Translate("-----Utility Create Labware Request Completion File  : blnSuccess = "), blnSuccess);
    }
    blnSuccess = LABWAREHANDLING::WaitForLabwareRequestCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
    TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
    blnInputTransferPositionLabwareRequestComplete = IF_AND_IF_OR::If_And_3_Variables(strTransferPosition, _strTransferPositionElectroporationPlate, strInputTransferPositionLabwareName, _strElectroporationPlateName, strInputTransferPositionOccupancy, Translate("1"));
    TrcTrace(Translate("-----blnInputTransferPositionLabwareRequestComplete = "), blnInputTransferPositionLabwareRequestComplete);
    if (blnInputTransferPositionLabwareRequestComplete == 0)
    {
      blnSuccess = RUNTIMEERRORHANDLING::TransportError();
      TrcTrace(Translate("-----RunTime error file creation blnSuccess = "), blnSuccess);
      abort;
    }
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
    blnSuccess = LABWAREHANDLING::RequestLabware(_strFilterPlateName, _strTransferPositionFilterPlate);
    TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
    if (_blnSimulationMode == 1)
    {
      if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      blnSuccess = LABWAREHANDLING::UtilityCreateLabwareRequestCompletionFile(_strFilterPlateName, _strTransferPositionFilterPlate);
      TrcTrace(Translate("-----Utility Create Labware Request Completion File  : blnSuccess = "), blnSuccess);
    }
    blnSuccess = LABWAREHANDLING::WaitForLabwareRequestCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
    TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
    blnInputTransferPositionLabwareRequestComplete = IF_AND_IF_OR::If_And_3_Variables(strTransferPosition, _strTransferPositionFilterPlate, strInputTransferPositionLabwareName, _strFilterPlateName, strInputTransferPositionOccupancy, Translate("1"));
    TrcTrace(Translate("-----blnInputTransferPositionLabwareRequestComplete = "), blnInputTransferPositionLabwareRequestComplete);
    if (blnInputTransferPositionLabwareRequestComplete == 0)
    {
      blnSuccess = RUNTIMEERRORHANDLING::TransportError();
      TrcTrace(Translate("-----RunTime error file creation blnSuccess = "), blnSuccess);
      abort;
    }
  }
  ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
  ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
  ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
  if(0){
    intMediaLineReturn = HSLHamiltonMediaFillModule::FillTrough(_intMediaLineInstrumentID, _intMediaLinePumpID, 75, 60);
    _MediaLineReturnHandle(intMediaLineReturn, Translate("fill trough"));
    intMediaLineReturn = HSLHamiltonMediaFillModule::WaitForPump(_intMediaLineInstrumentID, _intMediaLinePumpID);
    _MediaLineReturnHandle(intMediaLineReturn, Translate("wait for pump"));
  }
  ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
  onerror goto errLabel_2 ;
  err.Clear();
  ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
  errLabel_2 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    intMediaLineReturn = HSLHamiltonMediaFillModule::FillTrough(_intMediaLineInstrumentID, _intMediaLinePumpID, 75, 60);
    _MediaLineReturnHandle(intMediaLineReturn, Translate("fill trough"));
    intMediaLineReturn = HSLHamiltonMediaFillModule::WaitForPump(_intMediaLineInstrumentID, _intMediaLinePumpID);
    _MediaLineReturnHandle(intMediaLineReturn, Translate("wait for pump"));
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
  }   /* end if from skip handler if no error */
  ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
  MOVE96HEADANDARM::Move96HeadToFront(ML_STAR);
  ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  WasteChute::WasteChuteShakeStart(ML_STAR, 1, 40, 1);
  if( 0 == tmrVibrationWaste.SetTimer(5) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  TIMER_WAIT_FOR_VARIABLE_INPUTS::TimerWaitFor(tmrVibrationWaste, _blnSimulationMode, _blnSimulationMode, intTimeElapsed);
  WasteChute::WasteChuteShakeStop(ML_STAR, 1);
  blnMPE2Return = HSLMPELib::FilterPlatePlaced(_intMPE2DeviceID, _fltMPE2FilterPlateHeight, _fltMPE2NozzleHeight);
  _MPE2ReturnHandle(_intMPE2DeviceID, blnMPE2Return, Translate("FilterPlatePlaced"));
  blnMPE2Return = HSLMPELib::ProcessFilterToWasteContainer(_intMPE2DeviceID, _strMPE2ParametersLoad, 1, _intMPE2WasteContainer, 0);
  _MPE2ReturnHandle(_intMPE2DeviceID, blnMPE2Return, Translate("ProcessFilterToWasteContainer"));
  ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
  ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
  ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
  MOVE96HEADANDARM::Move96HeadToFront(ML_STAR);
  ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  WasteChute::WasteChuteShakeStart(ML_STAR, 1, 40, 1);
  if( 0 == tmrVibrationWaste.SetTimer(5) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  TIMER_WAIT_FOR_VARIABLE_INPUTS::TimerWaitFor(tmrVibrationWaste, _blnSimulationMode, _blnSimulationMode, intTimeElapsed);
  WasteChute::WasteChuteShakeStop(ML_STAR, 1);
  blnMPE2Return = HSLMPELib::ProcessFilterToWasteContainer(_intMPE2DeviceID, _strMPE2ParametersWash, 0, _intMPE2WasteContainer, 0);
  _MPE2ReturnHandle(_intMPE2DeviceID, blnMPE2Return, Translate("ProcessFilterToWasteContainer"));
  ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
  ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
  ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
  blnMPE2Return = HSLMPELib::CollectionPlatePlaced(_intMPE2DeviceID, _fltMPE2CollectionPlateHeight, _fltMPE2OffsetFromNozzles);
  _MPE2ReturnHandle(_intMPE2DeviceID, blnMPE2Return, Translate("CollectionPlatePlaced"));
  blnMPE2Return = HSLMPELib::RetrieveFilterPlate(_intMPE2DeviceID);
  _MPE2ReturnHandle(_intMPE2DeviceID, blnMPE2Return, Translate("CollectionPlatePlaced"));
  ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
  onerror goto errLabel_3 ;
  err.Clear();
  ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
  errLabel_3 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    intMediaLineReturn = HSLHamiltonMediaFillModule::FillTrough(_intMediaLineInstrumentID, _intMediaLinePumpID, 75, 60);
    _MediaLineReturnHandle(intMediaLineReturn, Translate("fill trough"));
    intMediaLineReturn = HSLHamiltonMediaFillModule::WaitForPump(_intMediaLineInstrumentID, _intMediaLinePumpID);
    _MediaLineReturnHandle(intMediaLineReturn, Translate("wait for pump"));
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
  }   /* end if from skip handler if no error */
  ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
  MOVE96HEADANDARM::Move96HeadToFront(ML_STAR);
  ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  WasteChute::WasteChuteShakeStart(ML_STAR, 1, 40, 1);
  if( 0 == tmrVibrationWaste.SetTimer(5) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  TIMER_WAIT_FOR_VARIABLE_INPUTS::TimerWaitFor(tmrVibrationWaste, _blnSimulationMode, _blnSimulationMode, intTimeElapsed);
  WasteChute::WasteChuteShakeStop(ML_STAR, 1);
  blnMPE2Return = HSLMPELib::ProcessFilterToCollectionPlate(_intMPE2DeviceID, _strMPE2ParametersWash, 0);
  _MPE2ReturnHandle(_intMPE2DeviceID, blnMPE2Return, Translate("ProcessFilterToCollectionPlate"));
  VIRTUALLABWARE_V2::MoveSeq(ML_STAR, ML_STAR.CollectionPlateMPE2, -2, 0, 0);
  ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
  VIRTUALLABWARE_V2::MoveSeq(ML_STAR, ML_STAR.CollectionPlateMPE2, 2, 0, 0);
  ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
  ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
  blnMPE2Return = HSLMPELib::CollectionPlateRemoved(_intMPE2DeviceID);
  _MPE2ReturnHandle(_intMPE2DeviceID, blnMPE2Return, Translate("CollectionPlateRemoved"));
  blnMPE2Return = HSLMPELib::RetrieveFilterPlate(_intMPE2DeviceID);
  _MPE2ReturnHandle(_intMPE2DeviceID, blnMPE2Return, Translate("RetrieveFilterPlate"));
  VIRTUALLABWARE_V2::MoveSeq(ML_STAR, ML_STAR.FilterPlateMPE2, -2, 0, 0);
  ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
  VIRTUALLABWARE_V2::MoveSeq(ML_STAR, ML_STAR.FilterPlateMPE2, 2, 0, 0);
  ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
  ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
  blnMPE2Return = HSLMPELib::FilterPlateRemoved(_intMPE2DeviceID);
  _MPE2ReturnHandle(_intMPE2DeviceID, blnMPE2Return, Translate("FilterPlateRemoved"));
  if(0){
    MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
    blnSuccess = LABWAREHANDLING::ReturnLabware(_strFilterPlateName, _strTransferPositionFilterPlate);
    TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
    if (_blnSimulationMode == 1)
    {
      if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      blnSuccess = LABWAREHANDLING::UtilityCreatLabwareReturnCompletionFile(_strFilterPlateName, _strTransferPositionFilterPlate);
      TrcTrace(Translate("-----Utility Create Labware Return Completion File  : blnSuccess = "), blnSuccess);
    }
    blnSuccess = LABWAREHANDLING::WaitForLabwareReturnCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
    TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
    blnSuccess = LABWAREHANDLING::ReturnLabware(_strElectroporationPlateName, _strTransferPositionElectroporationPlate);
    TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
    if (_blnSimulationMode == 1)
    {
      if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      blnSuccess = LABWAREHANDLING::UtilityCreatLabwareReturnCompletionFile(_strElectroporationPlateName, _strTransferPositionElectroporationPlate);
      TrcTrace(Translate("-----Utility Create Labware Return Completion File  : blnSuccess = "), blnSuccess);
    }
    blnSuccess = LABWAREHANDLING::WaitForLabwareReturnCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
    TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
    blnSuccess = TIPHANDLING::MoveTipRackWithCOREGrip_EmptyRackToWaste(ML_STAR, ML_STAR.COREGripTool_OnWaste_1000ul_0001, ML_STAR.Tips300ulStandardVolumeTipWithFilter_96_1, ML_STAR.Tips300ulStandardVolumeTipWithFilter_Waste, 0);
    TrcTrace(Translate("-----Move tip rack with CORE grips : blnSuccess = "), blnSuccess);
    blnSuccess = TIPHANDLING::MoveTipRackWithCOREGrip_EmptyRackToWaste(ML_STAR, ML_STAR.COREGripTool_OnWaste_1000ul_0001, ML_STAR.Tips50ulTipWithFilter_96_1, ML_STAR.Tips50ulTipWithFilter_Waste, 1);
    TrcTrace(Translate("-----Move tip rack with CORE grips : blnSuccess = "), blnSuccess);
  }
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Pipetting : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function D_Cleanup(  ) void {
  private variable intMediaLineReturn;
  private file hdlStatusFile;
  private variable blnMethodFinishedSuccessfully;
  private variable blnMPE2Return;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Cleanup : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  if (_blnAbortFlag == 0)
  {
    blnMethodFinishedSuccessfully = 1;
    MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
  }
  else
  {
    blnMethodFinishedSuccessfully = 0;
  }
  hdlStatusFile.AddField("Status", blnMethodFinishedSuccessfully, hslInteger);
  hdlStatusFile.SetDelimiter(hslCSVDelimited);
  if( 0 == hdlStatusFile.Open(_strFilepathStatus, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strFilepathStatus, "HxMetEdCompCmd");
  }
  if( 0 == hdlStatusFile.WriteRecord() )
  {
        MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 != hdlStatusFile.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  hdlStatusFile.RemoveFields();
  intMediaLineReturn = HSLHamiltonMediaFillModule::Disconnect(_intMediaLineInstrumentID);
  _MediaLineReturnHandle(intMediaLineReturn, Translate("disconnect"));
  blnMPE2Return = HSLMPELib::Disconnect(_intMPE2DeviceID);
  _MPE2ReturnHandle(_intMPE2DeviceID, blnMPE2Return, Translate("Disconnect"));
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Cleanup : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function _VersionInfo(  ) void {
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   VersionInfo : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   VersionInfo : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function _MediaLineReturnHandle( variable i_intReturnCode, variable i_strCommandDescription ) void {
  private dialog customDialog_4;
  if(0){
    if (i_intReturnCode == 1)
    {
      TrcTrace4(Translate("--------------------------- Media line error - "), i_strCommandDescription, Translate(" ---------------------------"), Translate(""));
      customDialog_4.InitCustomDialog("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");
      customDialog_4.SetCustomDialogProperty( "textBlock3.Text", i_strCommandDescription );
      customDialog_4.ShowCustomDialog();
      abort;
    }
  }
}

private function _MPE2ReturnHandle( variable i_intMPE2ID, variable i_blnReturnCode, variable i_strCommandDescription ) void {
  private dialog customDialog_5;
  private variable strMPE2LastError;
  if (i_blnReturnCode == 1)
  {
    HSLMPELib::GetLastError(i_intMPE2ID, strMPE2LastError);
    TrcTrace4(Translate("--------------------------- MPE2 error - "), i_strCommandDescription, Translate(" ---------------------------"), Translate(""));
    TrcTrace4(Translate("--------------------------- MPE2 error - "), strMPE2LastError, Translate(" ---------------------------"), Translate(""));
    customDialog_5.InitCustomDialog("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");
    customDialog_5.SetCustomDialogProperty( "textBlock3.Text", i_strCommandDescription );
    customDialog_5.SetCustomDialogProperty( "textBlock6.Text", strMPE2LastError );
    customDialog_5.ShowCustomDialog();
    abort;
  }
}
