global device ML_STAR ("culture processing\\Bacterial plate test.lay", "ML_STAR", hslTrue);
#include "culture processing\\Bacterial plate test.res"
variable loopCounter1;
variable seq_pos;
variable loopCounter2;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    {
      loopCounter1 = 0;
      while (
         (ML_STAR.plate_1_media.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MediaLine3, 1, ML_STAR.plate_1_media, 1, ML_STAR.Tips1000ulHighVolumeTipWithFilter_Partial, 1);
        loopCounter1 = loopCounter1 + 1;
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        if (
           (ML_STAR.plate_1_media.GetCurrentPosition() > 0 && ML_STAR.plate_1_media.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MediaLine3.SetMax(ML_STAR.MediaLine3.GetTotal());
      ML_STAR.plate_1_media.SetMax(ML_STAR.plate_1_media.GetTotal());
      ML_STAR.Tips1000ulHighVolumeTipWithFilter_Partial.SetMax(ML_STAR.Tips1000ulHighVolumeTipWithFilter_Partial.GetTotal());
      ML_STAR.MediaLine3.SetCurrentPosition(1);
      ML_STAR.plate_1_media.SetCurrentPosition(1);
    }
    {
      loopCounter1 = 0;
      while (
         (ML_STAR.destination_plate.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MediaLine3, 1, ML_STAR.Tips1000ulHighVolumeTipWithFilter_Partial, 1, ML_STAR.destination_plate, 1);
        loopCounter1 = loopCounter1 + 1;
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        if (
           (ML_STAR.destination_plate.GetCurrentPosition() > 0 && ML_STAR.destination_plate.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MediaLine3.SetMax(ML_STAR.MediaLine3.GetTotal());
      ML_STAR.Tips1000ulHighVolumeTipWithFilter_Partial.SetMax(ML_STAR.Tips1000ulHighVolumeTipWithFilter_Partial.GetTotal());
      ML_STAR.destination_plate.SetMax(ML_STAR.destination_plate.GetTotal());
      ML_STAR.MediaLine3.SetCurrentPosition(1);
      ML_STAR.destination_plate.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    {
      for(loopCounter2 = 0; loopCounter2 < 2;)
      {
        loopCounter2 = loopCounter2 + 1;
        ML_STAR.source_plate.SetCurrentPosition(1);
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        seq_pos = loopCounter2 + 1;
        ML_STAR.source_plate.SetCurrentPosition(seq_pos);
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
      }
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    {
      for(loopCounter2 = 0; loopCounter2 < 2;)
      {
        loopCounter2 = loopCounter2 + 1;
        ML_STAR.source_plate.SetCurrentPosition(2);
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        seq_pos = loopCounter2 * 2;
        seq_pos = seq_pos + 2;
        ML_STAR.source_plate.SetCurrentPosition(seq_pos);
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
      }
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    {
      for(loopCounter2 = 0; loopCounter2 < 2;)
      {
        loopCounter2 = loopCounter2 + 1;
        ML_STAR.source_plate.SetCurrentPosition(4);
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        if (loopCounter2 == 1)
        {
          ML_STAR.source_plate.SetCurrentPosition(9);
        }
        else
        {
          ML_STAR.source_plate.SetCurrentPosition(13);
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
      }
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR.source_plate.SetCurrentPosition(9);
    {
      for(loopCounter2 = 0; loopCounter2 < 12;)
      {
        loopCounter2 = loopCounter2 + 1;
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
      }
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  } }
