 namespace _Method { #include "..\\HSLTrcLib.hsl" }
#include "00 Initialise.res"
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "Culture processing\\TipHandling.hs_" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
global device ML_STAR ("00 Initialise.lay", "ML_STAR", hslTrue);
variable _str300ulTipCounter;
variable _str1000ulTipCounter;
variable _str50ulTipCounter;
dialog customDialog_1;
dialog customDialog_2;
dialog customDialog_3;
variable retValueDialog;
dialog customDialog_4;
dialog customDialog_5;
variable _blnSimulationMode;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    TIPHANDLING::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    _blnSimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    TrcTrace(Translate("_blnSimulationMode = "), _blnSimulationMode);
    if (_blnSimulationMode == 1)
    {
      customDialog_5.InitCustomDialog("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");
      customDialog_5.ShowCustomDialog();
      retValueDialog = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
    }
    customDialog_3.InitCustomDialog("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");
    customDialog_3.ShowCustomDialog();
    retValueDialog = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
    _str1000ulTipCounter = Translate("1000ulHighVolumeTipWithFilter");
    TipCount::Edit2(ML_STAR.Tips1000ulHighVolumeTipWithFilter_Partial, _str1000ulTipCounter, ML_STAR, 999);
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    retValueDialog = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
    _str300ulTipCounter = Translate("300ulStandardVolumeTipWithFilter");
    TipCount::Edit2(ML_STAR.Tips300ulStandardVolumeTipWithFilter_Partial, _str300ulTipCounter, ML_STAR, 999);
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    retValueDialog = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    _str50ulTipCounter = Translate("50ulTipWithFilter");
    TipCount::Edit2(ML_STAR.Tips50ulTipWithFilter_Partial, _str50ulTipCounter, ML_STAR, 999);
    TIPHANDLING::_ExitLibrary();
  } }
