private function A_Definitions(  ) void ;
private function B_Initialise(  ) void ;
private function C_Pipetting(  ) void ;
private function D_Cleanup(  ) void ;
private function _MediaLineReturnHandle( variable i_intReturnCode, variable i_strCommandDescription ) void ;
private function _VersionInfo(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  private dialog customDialog_1;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Aborting : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  customDialog_1.InitCustomDialog("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");
  customDialog_1.ShowCustomDialog();
  TrcTrace(Translate("------------------------------------ Recovery method filepath - C:\Program Files (x86)\HAMILTON\Methods\[MPE]2\96head crash recovery.med ------------------------------------"), Translate(""));
  _blnAbortFlag = 1;
  D_Cleanup();
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Aborting : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function B_Initialise(  ) void {
  private variable intMediaLineReturn;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Initialise : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  _blnSimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
  TrcTrace(Translate("_blnSimulationMode = "), _blnSimulationMode);
  if (_blnSimulationMode == 1)
  {
    _intSimulationMode = 1;
  }
  else
  {
    _intSimulationMode = 0;
  }
  intMediaLineReturn = HSLHamiltonMediaFillModule::Initialize(_intMediaLineCOMPort, _intSimulationMode, _intMediaLineInstrumentID);
  TrcTrace(Translate("_intMediaLineInstrumentID = "), _intMediaLineInstrumentID);
  intMediaLineReturn = HSLHamiltonMediaFillModule::SetPumpDirection(_intMediaLineInstrumentID, _intMediaLinePumpID, 0);
  intMediaLineReturn = HSLHamiltonMediaFillModule::FillTrough(_intMediaLineInstrumentID, _intMediaLinePumpID, 75, 1);
  _MediaLineReturnHandle(intMediaLineReturn, Translate("fill trough"));
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Initialise : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function A_Definitions(  ) void {
  private variable blnSuccess;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Definitions : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  _intMediaLineCOMPort = 8;
  TrcTrace(Translate("_intMediaLineCOMPort = "), _intMediaLineCOMPort);
  _intMediaLinePumpID = 1;
  TrcTrace(Translate("_intMediaLinePumpID = "), _intMediaLinePumpID);
  _strFilepathStatus = Translate("C:\\HamiltonOutputFiles\\HamiltonStatus.csv");
  TrcTrace(Translate("_strFilepathStatus = "), _strFilepathStatus);
  blnSuccess = FileDirectoryLib::CheckIfFileExists(_strFilepathStatus);
  if (blnSuccess == 1)
  {
    FileDirectoryLib::DeleteFile(_strFilepathStatus);
  }
  _strTransferPositionGrowthPlate = Translate("PlateHandOff");
  TrcTrace(Translate("_strTransferPositionGrowthPlate = "), _strTransferPositionGrowthPlate);
  _strTransferPositionTips1000 = Translate("TipsHandOff");
  TrcTrace(Translate("_strTransferPositionTips1000 = "), _strTransferPositionTips1000);
  _strWastePositionTips1000 = Translate("Tips1000ulHighVolumeTipWithFilter_Waste");
  _strWastePositionTips300 = Translate("Tips300ulStandardVolumeTipWithFilter_Waste");
  _strWastePositionTips50 = Translate("Tips50ulTipWithFilter_Waste");
  _strGrowthPlateName = Translate("GrowthPlate");
  TrcTrace(Translate("_strGrowthPlateName = "), _strGrowthPlateName);
  _strTips1000Name = Translate("Tips1000");
  TrcTrace(Translate("_strTips1000Name = "), _strTips1000Name);
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Definitions : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function C_Pipetting(  ) void {
  private variable intTimeElapsed;
  private timer tmrVibrationWaste;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Pipetting : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
  MOVE96HEADANDARM::Move96HeadToFront(ML_STAR);
  ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  WasteChute::WasteChuteShakeStart(ML_STAR, 1, 40, 1);
  if( 0 == tmrVibrationWaste.SetTimer(5) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  TIMER_WAIT_FOR_VARIABLE_INPUTS::TimerWaitFor(tmrVibrationWaste, _blnSimulationMode, _blnSimulationMode, intTimeElapsed);
  WasteChute::WasteChuteShakeStop(ML_STAR, 1);
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Pipetting : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function D_Cleanup(  ) void {
  private variable intMediaLineReturn;
  private file hdlStatusFile;
  private variable blnMethodFinishedSuccessfully;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Cleanup : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  if (_blnAbortFlag == 0)
  {
    blnMethodFinishedSuccessfully = 1;
    MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
  }
  else
  {
    blnMethodFinishedSuccessfully = 0;
  }
  hdlStatusFile.AddField("Status", blnMethodFinishedSuccessfully, hslInteger);
  hdlStatusFile.SetDelimiter(hslCSVDelimited);
  if( 0 == hdlStatusFile.Open(_strFilepathStatus, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strFilepathStatus, "HxMetEdCompCmd");
  }
  if( 0 == hdlStatusFile.WriteRecord() )
  {
        MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 != hdlStatusFile.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  hdlStatusFile.RemoveFields();
  intMediaLineReturn = HSLHamiltonMediaFillModule::Disconnect(_intMediaLineInstrumentID);
  _MediaLineReturnHandle(intMediaLineReturn, Translate("disconnect"));
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Cleanup : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function _VersionInfo(  ) void {
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   VersionInfo : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   VersionInfo : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function _MediaLineReturnHandle( variable i_intReturnCode, variable i_strCommandDescription ) void {
  private dialog customDialog_2;
  if(0){
    if (i_intReturnCode == 1)
    {
      TrcTrace4(Translate("--------------------------- Media line error - "), i_strCommandDescription, Translate(" ---------------------------"), Translate(""));
      customDialog_2.InitCustomDialog("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");
      customDialog_2.SetCustomDialogProperty( "textBlock3.Text", i_strCommandDescription );
      customDialog_2.ShowCustomDialog();
      abort;
    }
  }
}
