#include "00 Initialise.res"
global device ML_STAR ("00 Initialise.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "Culture processing\\LabwareHandling.hs_" }
 namespace _Method { #include "Culture processing\\Move96HeadAndArm.hs_" }
 namespace _Method { #include "Culture processing\\TipHandling.hs_" }
 namespace _Method { #include "If_and_If_or.hs_" }
 namespace _Method { #include "PAA\\RunTimeErrorHandling.hs_" }
 namespace _Method { #include "..\\HSLTrcLib.hsl" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
variable _strTips50Name;
variable _strWastePositionTips50;
variable _strWastePositionTips1000;
variable _strTransferPositionTips50;
variable _strWastePositionTips300;
variable _strTips300Name;
variable _strTransferPositionTips300;
variable blnInputTransferPositionLabwareRequestComplete;
variable strTransferPosition;
variable blnSuccess;
variable strInputTransferPositionLabwareName;
variable _blnSimulationMode;
variable strInputTransferPositionOccupancy;
timer tmrSimModeLabwareRequestCompletionFileCreation;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    LABWAREHANDLING::_InitLibrary();
    MOVE96HEADANDARM::_InitLibrary();
    TIPHANDLING::_InitLibrary();
    IF_AND_IF_OR::_InitLibrary();
    RUNTIMEERRORHANDLING::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    _strTransferPositionTips300 = Translate("TipsHandOff");
    TrcTrace(Translate("_strTransferPositionTips300 = "), _strTransferPositionTips300);
    _strTransferPositionTips50 = Translate("TipsHandOff");
    TrcTrace(Translate("_strTransferPositionTips50 = "), _strTransferPositionTips50);
    _strWastePositionTips1000 = Translate("Tips1000ulHighVolumeTipWithFilter_Waste");
    _strWastePositionTips300 = Translate("Tips300ulStandardVolumeTipWithFilter_Waste");
    _strWastePositionTips50 = Translate("Tips50ulTipWithFilter_Waste");
    _strTips300Name = Translate("Tips300");
    TrcTrace(Translate("_strTips300Name = "), _strTips300Name);
    _strTips50Name = Translate("Tips50");
    TrcTrace(Translate("_strTips50Name = "), _strTips50Name);
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    _blnSimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    TrcTrace(Translate("_blnSimulationMode = "), _blnSimulationMode);
    MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
    blnSuccess = LABWAREHANDLING::RequestLabware(_strTips300Name, _strTransferPositionTips300);
    TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
    if (_blnSimulationMode == 1)
    {
      if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      blnSuccess = LABWAREHANDLING::UtilityCreateLabwareRequestCompletionFile(_strTips300Name, _strTransferPositionTips300);
      TrcTrace(Translate("-----Utility Create Labware Request Completion File  : blnSuccess = "), blnSuccess);
    }
    blnSuccess = LABWAREHANDLING::WaitForLabwareRequestCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
    TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
    blnInputTransferPositionLabwareRequestComplete = IF_AND_IF_OR::If_And_3_Variables(strTransferPosition, _strTransferPositionTips300, strInputTransferPositionLabwareName, _strTips300Name, strInputTransferPositionOccupancy, Translate("1"));
    TrcTrace(Translate("-----blnInputTransferPositionLabwareRequestComplete = "), blnInputTransferPositionLabwareRequestComplete);
    if (blnInputTransferPositionLabwareRequestComplete == 0)
    {
      blnSuccess = RUNTIMEERRORHANDLING::TransportError();
      TrcTrace(Translate("-----RunTime error file creation blnSuccess = "), blnSuccess);
      abort;
    }
    blnSuccess = TIPHANDLING::MoveTipRackWithCOREGrip_96HeadTipsOnly(ML_STAR, ML_STAR.COREGripTool_OnWaste_1000ul_0001, ML_STAR.Tips300ulStandardVolumeTipWithFilter_HandOff, ML_STAR.Tips300ulStandardVolumeTipWithFilter_96_1, 1);
    TrcTrace(Translate("-----Move tip rack with CORE grips : blnSuccess = "), blnSuccess);
    blnSuccess = TIPHANDLING::MoveTipRackWithCOREGrip_96HeadTipsOnly(ML_STAR, ML_STAR.COREGripTool_OnWaste_1000ul_0001, ML_STAR.Tips300ulStandardVolumeTipWithFilter_96_1, ML_STAR.Tips300ulStandardVolumeTipWithFilter_HandOff, 1);
    TrcTrace(Translate("-----Move tip rack with CORE grips : blnSuccess = "), blnSuccess);
    MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
    blnSuccess = LABWAREHANDLING::ReturnLabware(_strTips300Name, _strTransferPositionTips300);
    TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
    if (_blnSimulationMode == 1)
    {
      if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      blnSuccess = LABWAREHANDLING::UtilityCreatLabwareReturnCompletionFile(_strTips300Name, _strTransferPositionTips300);
      TrcTrace(Translate("-----Utility Create Labware Return Completion File  : blnSuccess = "), blnSuccess);
    }
    blnSuccess = LABWAREHANDLING::WaitForLabwareReturnCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
    TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
    MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
    blnSuccess = LABWAREHANDLING::RequestLabware(_strTips50Name, _strTransferPositionTips50);
    TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
    if (_blnSimulationMode == 1)
    {
      if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      blnSuccess = LABWAREHANDLING::UtilityCreateLabwareRequestCompletionFile(_strTips50Name, _strTransferPositionTips50);
      TrcTrace(Translate("-----Utility Create Labware Request Completion File  : blnSuccess = "), blnSuccess);
    }
    blnSuccess = LABWAREHANDLING::WaitForLabwareRequestCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
    TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
    blnInputTransferPositionLabwareRequestComplete = IF_AND_IF_OR::If_And_3_Variables(strTransferPosition, _strTransferPositionTips50, strInputTransferPositionLabwareName, _strTips50Name, strInputTransferPositionOccupancy, Translate("1"));
    TrcTrace(Translate("-----blnInputTransferPositionLabwareRequestComplete = "), blnInputTransferPositionLabwareRequestComplete);
    if (blnInputTransferPositionLabwareRequestComplete == 0)
    {
      blnSuccess = RUNTIMEERRORHANDLING::TransportError();
      TrcTrace(Translate("-----RunTime error file creation blnSuccess = "), blnSuccess);
      abort;
    }
    blnSuccess = TIPHANDLING::MoveTipRackWithCOREGrip_96HeadTipsOnly(ML_STAR, ML_STAR.COREGripTool_OnWaste_1000ul_0001, ML_STAR.Tips50ulTipWithFilter_HandOff, ML_STAR.Tips50ulTipWithFilter_96_1, 1);
    TrcTrace(Translate("-----Move tip rack with CORE grips : blnSuccess = "), blnSuccess);
    blnSuccess = TIPHANDLING::MoveTipRackWithCOREGrip_96HeadTipsOnly(ML_STAR, ML_STAR.COREGripTool_OnWaste_1000ul_0001, ML_STAR.Tips50ulTipWithFilter_96_1, ML_STAR.Tips50ulTipWithFilter_HandOff, 1);
    TrcTrace(Translate("-----Move tip rack with CORE grips : blnSuccess = "), blnSuccess);
    MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
    blnSuccess = LABWAREHANDLING::ReturnLabware(_strTips50Name, _strTransferPositionTips50);
    TrcTrace(Translate("-----Request single plate  : blnSuccess = "), blnSuccess);
    if (_blnSimulationMode == 1)
    {
      if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.SetTimer(6) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == tmrSimModeLabwareRequestCompletionFileCreation.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      blnSuccess = LABWAREHANDLING::UtilityCreatLabwareReturnCompletionFile(_strTips50Name, _strTransferPositionTips50);
      TrcTrace(Translate("-----Utility Create Labware Return Completion File  : blnSuccess = "), blnSuccess);
    }
    blnSuccess = LABWAREHANDLING::WaitForLabwareReturnCompletion(strTransferPosition, strInputTransferPositionLabwareName, strInputTransferPositionOccupancy);
    TrcTrace(Translate("-----Wait For Labware Request Completion : blnSuccess = "), blnSuccess);
    LABWAREHANDLING::_ExitLibrary();
    MOVE96HEADANDARM::_ExitLibrary();
    TIPHANDLING::_ExitLibrary();
    IF_AND_IF_OR::_ExitLibrary();
    RUNTIMEERRORHANDLING::_ExitLibrary();
  } }
