private function A_Definitions(  ) void ;
private function B_Initialise(  ) void ;
private function C_Pipetting(  ) void ;
private function D_Cleanup(  ) void ;
private function _VersionInfo(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  private dialog customDialog_1;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Aborting : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  customDialog_1.InitCustomDialog("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");
  customDialog_1.ShowCustomDialog();
  TrcTrace(Translate("------------------------------------ Recovery method filepath - C:\Program Files (x86)\HAMILTON\Methods\[MPE]2\96head crash recovery.med ------------------------------------"), Translate(""));
  _blnAbortFlag = 1;
  D_Cleanup();
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Aborting : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function B_Initialise(  ) void {
  private variable strReturnValue;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Initialise : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  _blnSimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
  TrcTrace(Translate("_blnSimulationMode = "), _blnSimulationMode);
  if (_blnSimulationMode == 1)
  {
    _intSimulationMode = 1;
  }
  else
  {
    _intSimulationMode = 0;
  }
  MECC::TraceComment(Translate("Init easy pick"));
  if (_blnSimulationMode == 1)
  {
    _strColoniesSettings = Translate("Culture Processing Simulation");
    TrcTrace(Translate("_strColoniesSettings = "), _strColoniesSettings);
  }
  strReturnValue = EASYPICKII_STEPS::easyStep_Init(ML_STAR, EASYPICKII::_TRACE_LEVEL_FULL, EASYPICKII::_HSLTRUE);
  if (strReturnValue != EASYPICKII::ERROR::_NONE)
  {
    EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
    abort;
  }
  MECC::TraceComment(Translate("Request the number of used channels"));
  _intNumberOfChannels = EASYPICKII::HELPER::MLSTAR::GetNumberOfPipettingChannels(ML_STAR);
  _intMaxNumberOfChannelsForPicking = _intNumberOfChannels;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Initialise : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function A_Definitions(  ) void {
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Definitions : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  _blnConfigurationWithDialogs = 0;
  TrcTrace(Translate("_blnConfigurationWithDialogs = "), _blnConfigurationWithDialogs);
  _strLightSource = EASYPICKII::EASYPICKII_HELPER::LIGHTSOURCE::_MLSTAR_DIV3_PWM3;
  TrcTrace(Translate("_strLightSource = "), _strLightSource);
  _intLightIntensity = 10;
  TrcTrace(Translate("_intLightIntensity = "), _intLightIntensity);
  _blnShowCameraLiveView = EASYPICKII::_HSLFALSE;
  TrcTrace(Translate("_blnShowCameraLiveView = "), _blnShowCameraLiveView);
  _strColoniesSettings = Translate("Culture Processing");
  TrcTrace(Translate("_strColoniesSettings = "), _strColoniesSettings);
  _strAgarPlateDescription = Translate("AgarPlate");
  TrcTrace(Translate("_strAgarPlateDescription = "), _strAgarPlateDescription);
  _strCameraSettings = "Culture Processing";
  TrcTrace(Translate("_strCameraSettings = "), _strCameraSettings);
  _intMaxColoniesPerWell = 12;
  TrcTrace(Translate("_intMaxColoniesPerWell = "), _intMaxColoniesPerWell);
  _arrIntColoniesPerWell.SetSize(0);
  _arrIntColoniesPerWell.AddAsLast(_intMaxColoniesPerWell);
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Definitions : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function C_Pipetting(  ) void {
  private variable loopCounter1;
  private variable intRackWellsY;
  private variable intTotalNumberOfColonies;
  private variable intRackErrorCode;
  private variable strUsedChannelPattern;
  private variable strRackPictureFilename;
  private variable loopCounterColoniesPickingCycle;
  private variable strChannelPatternForPicking;
  private variable intNumberOfColoniesForNextCycle;
  private variable strReturnValue;
  private variable intNumberOfPickedColonies;
  private variable intRackWellsX;
  private variable intUsedNumberOfColonies;
  private variable intEasyPickIIRackID;
  private timer tmrDisplayWait;
  private sequence seqColonySequence;
  private variable arrEasyPickColonyPropertyID[];
  private variable arrintChannelToWell[];
  private variable _strAgarPlateID;
  private variable tmp_ReturnValue;
  private dialog customDialog_2;
  private variable retValueDialog;
  private dialog customDialog_3;
  private variable loopCounter2;
  private variable intReturnValueDialog;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Pipetting : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  {
    for(loopCounter1 = 0; loopCounter1 < 1;)
    {
      loopCounter1 = loopCounter1 + 1;
      _strAgarPlateID = StrConcat2(Translate("AgarPlate"), loopCounter1);
      MECC::TraceComment(Translate("Get user to load agar plate"));
      customDialog_2.InitCustomDialog("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");
      customDialog_2.ShowCustomDialog();
      retValueDialog = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
      MECC::TraceComment(Translate("Move arm out of the way"));
      ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
      {
        loopCounter2 = 0;
        while (1 == 1)
        {
          loopCounter2 = loopCounter2 + 1;
          MECC::TraceComment(Translate("Show application main window."));
          strReturnValue = EASYPICKII::GUI::Show(EASYPICKII::GUI::SHOW::MODE::_NORMAL);
          if (strReturnValue != EASYPICKII::ERROR::_NONE)
          {
            EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
            abort;
          }
          MECC::TraceComment(Translate("Turn on the light table"));
          strReturnValue = EASYPICKII_STEPS::easyStep_Light_On(ML_STAR, _strLightSource, _intLightIntensity);
          if (strReturnValue != EASYPICKII::ERROR::_NONE)
          {
            EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
            abort;
          }
          MECC::TraceComment(Translate("Switch on top light."));
          strReturnValue = EASYPICKII::MLSTAR::Light_On(ML_STAR, _strLightSourceTop, _intLightIntensity);
          if (strReturnValue != EASYPICKII::ERROR::_NONE)
          {
            EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
            abort;
          }
          MECC::TraceComment(Translate("Take picture."));
          TrcTrace(Translate("_strCameraSettings = "), _strCameraSettings);
          if (_blnSimulationMode == 0)
          {
            strReturnValue = EASYPICKII_STEPS::easyStep_Colony_TakePicture(ML_STAR, _strCameraSettings, EASYPICKII::_HSLTRUE);
            if (strReturnValue != EASYPICKII::ERROR::_NONE)
            {
              EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
              abort;
            }
          }
          else
          {
            tmp_ReturnValue = EASYPICKII::CAMERA::LoadPicture("settings\\ColonyDemo\\Demo_Plate_gray.tif");
            if (strReturnValue != EASYPICKII::ERROR::_NONE)
            {
              EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
              abort;
            }
          }
          MECC::TraceComment(Translate("Turn off the light table"));
          strReturnValue = EASYPICKII_STEPS::easyStep_Light_Off(ML_STAR, _strLightSource);
          if (strReturnValue != EASYPICKII::ERROR::_NONE)
          {
            EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
            abort;
          }
          MECC::TraceComment(Translate("Turn off the top light"));
          strReturnValue = EASYPICKII::MLSTAR::Light_Off(ML_STAR, _strLightSourceTop);
          if (strReturnValue != EASYPICKII::ERROR::_NONE)
          {
            EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
            abort;
          }
          MECC::TraceComment(Translate("Analyse picture"));
          strReturnValue = EASYPICKII_STEPS::easyStep_Colony_Analyse(_strColoniesSettings, EASYPICKII::_HSLTRUE, _strAgarPlateID, _strAgarPlateDescription, intEasyPickIIRackID);
          if (strReturnValue != EASYPICKII::ERROR::_NONE)
          {
            EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
            customDialog_3.InitCustomDialog("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");
            customDialog_3.ShowCustomDialog();
            intReturnValueDialog = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
            TrcTrace(Translate("intReturnValueDialog = "), intReturnValueDialog);
            if (intReturnValueDialog == 2)
            {
              abort;
            }
          }
          else
          {
            break;
          }
        }
      }
      MECC::TraceComment(Translate("Get the analysed result"));
      strReturnValue = EASYPICKII::DATABASE::GetEasyPickIIRack(intEasyPickIIRackID, _strAgarPlateID, strRackPictureFilename, intRackWellsX, intRackWellsY, intRackErrorCode, _strAgarPlateDescription);
      if (strReturnValue != EASYPICKII::ERROR::_NONE)
      {
        EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
        abort;
      }
      intNumberOfPickedColonies = 0;
      {
        loopCounterColoniesPickingCycle = 0;
        while (1 == 1)
        {
          loopCounterColoniesPickingCycle = loopCounterColoniesPickingCycle + 1;
          intNumberOfColoniesForNextCycle = _intMaxColoniesPerWell - intNumberOfPickedColonies;
          TrcTrace(Translate("intNumberOfColoniesForNextCycle is "), intNumberOfColoniesForNextCycle);
          if (intNumberOfColoniesForNextCycle > _intMaxNumberOfChannelsForPicking)
          {
            intNumberOfColoniesForNextCycle = _intMaxNumberOfChannelsForPicking;
          }
          TrcTrace(Translate("intNumberOfColoniesForNextCycle is "), intNumberOfColoniesForNextCycle);
          MECC::TraceComment(Translate("Generate channel pattern for picking"));
          strChannelPatternForPicking = EASYPICKII::HELPER::MLSTAR::ChannelPattern_LeftAdjust(_intMaxNumberOfChannelsForPicking, _intNumberOfChannels);
          MECC::TraceComment(Translate("Retrieve the next colony positions (sequence)"));
          strReturnValue = EASYPICKII_STEPS::easyStep_Colony_RetrieveColonyPositions(ML_STAR, "easypickii_adjust_small_0001", "Agar_Plate", "ml_star\\EasyPickII\\ColonySpot\\colony_spot.rck", intEasyPickIIRackID, _arrIntColoniesPerWell, strChannelPatternForPicking, strUsedChannelPattern, intUsedNumberOfColonies, intTotalNumberOfColonies, seqColonySequence, arrEasyPickColonyPropertyID, arrintChannelToWell);
          if (strReturnValue != EASYPICKII::ERROR::_NONE)
          {
            EASYPICKII_STEPS::ShowErrorDialog(strReturnValue);
            abort;
          }
          MECC::TraceComment(Translate("Check for minimum found 1 colony, otherwise break the loop"));
          if (intTotalNumberOfColonies == 0)
          {
            EASYPICKII::GUI::Hide();
            break;
          }
          MECC::TraceComment(Translate("Check for minimum 1 colony to be picked, otherwise break the loop"));
          if (intUsedNumberOfColonies == 0)
          {
            EASYPICKII::GUI::Hide();
            break;
          }
          if( 0 == tmrDisplayWait.SetTimer(2) )
          {
                MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if( 0 == tmrDisplayWait.WaitTimer(hslFalse, hslFalse) )
          {
                MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          MECC::TraceComment(Translate("Hide application window."));
          EASYPICKII::GUI::Hide();
        }
      }
      MECC::TraceComment(Translate("Hide application window."));
      EASYPICKII::GUI::Hide();
    }
  }
  SeqResetSequenceIndexes(ML_STAR.trpAgarPlates1To4);
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Pipetting : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function D_Cleanup(  ) void {
  private variable blnMethodFinishedSuccessfully;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Cleanup : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  if (_blnAbortFlag == 0)
  {
    blnMethodFinishedSuccessfully = 1;
    MOVE96HEADANDARM::Move96HeadAndArm(ML_STAR);
  }
  else
  {
    blnMethodFinishedSuccessfully = 0;
  }
  if (_blnSimulationMode == 0)
  {
    EASYPICKII_STEPS::easyStep_DeInit(ML_STAR);
  }
  EASYPICKII_STEPS::easyStep_DeInit(ML_STAR);
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   Cleanup : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}

private function _VersionInfo(  ) void {
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   VersionInfo : START\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------------------------------------------------------------------------\n\n                                                                   VersionInfo : END\n\n----------------------------------------------------------------------------------------------------------------------------------------------------------------------------"));
}
