 namespace _Method { #include "easyPickIILibrary\\easyPickII_Steps.hs_" }
 namespace _Method { #include "easyPickIILibrary\\easyPickII_Library.hsl" }
#include "MLSTARLet_LightTable-TopEye.res"
 namespace _Method { #include "HSLTipCountingLib.hsl" }
variable tmp_ReturnValue;
global device ML_STAR ("MLSTARLet_LightTable-TopEye.lay", "ML_STAR", hslTrue);
variable SettingNameCamera;
variable ShowCameraLiveView;
variable tmp_UserDialogReturnValueShowCameraLiveView;
variable LightSource;
variable LightIntensity;
variable SettingNameColony;
variable MaxColoniesPerWell;
variable PlateBarcode;
variable NoOfChannels;
variable PlateDescription;
variable MaxNumberOfChannelsForPicking;
variable loopCounterColoniesPickingCycle;
variable ChannelPatternForPicking;
variable UsedNumberOfColonies;
variable UsedChannelPattern;
variable AspirateStepReturn;
variable TotalNumberOfColonies;
sequence ColonySequence;
variable ArrayEasyPickColonyPropertyID[];
variable easyPickIIRackID;
variable TipCounterName;
variable arrintChannelToWell[];
variable arrintColoniesPerWell[];
variable intRackWellsY;
variable intRackErrorCode;
variable strRackPictureFilename;
variable strRackDescription;
variable strRackBarcode;
variable intRackWells;
variable intRackWellsX;
variable loopCounterRackWellNumber;
variable ConfigurationWithDialogs;
variable ShowHSLTipCountingDialog_TimeInSeconds;
variable ShowEasyPickIIMainWindow_TimeInSeconds;
dialog dialogHandle_1;
dialog dialogHandle_2;
timer timerShowEasyPickIIMainWindow;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    EASYPICKII_STEPS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    tmp_ReturnValue = EASYPICKII_STEPS::easyStep_Init(ML_STAR, EASYPICKII::_TRACE_LEVEL_FULL, EASYPICKII::_HSLTRUE);
    if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
    {
      EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
      abort;
    }
    ConfigurationWithDialogs = 1;
    LightSource = EASYPICKII::EASYPICKII_HELPER::LIGHTSOURCE::_MLSTAR_DIV3_PWM3;
    LightIntensity = 100;
    if (_EASYPICKII_SimulationMode == 0)
    {
      SettingNameCamera = "default";
      SettingNameColony = "LightTableMTP-HolePunch-4x2";
    }
    else
    {
      SettingNameCamera = "default";
      SettingNameColony = "Demo_Plate_gray";
    }
    ShowCameraLiveView = EASYPICKII::_HSLFALSE;
    TipCounterName = "StandardVolumeTips";
    PlateBarcode = Translate("");
    PlateDescription = Translate("");
    MaxColoniesPerWell = 3;
    NoOfChannels = EASYPICKII::HELPER::MLSTAR::GetNumberOfPipettingChannels(ML_STAR);
    MaxNumberOfChannelsForPicking = NoOfChannels;
    ShowEasyPickIIMainWindow_TimeInSeconds = 3;
    ShowHSLTipCountingDialog_TimeInSeconds = 60;
    if (ConfigurationWithDialogs == 0)
    {
      ShowHSLTipCountingDialog_TimeInSeconds = 1;
    }
    TipCount::Edit2(ML_STAR.MlStarStandardVolumeTips, TipCounterName, ML_STAR, ShowHSLTipCountingDialog_TimeInSeconds);
    if (_EASYPICKII_SimulationMode == EASYPICKII::_HSLFALSE)
    {
      if (ConfigurationWithDialogs != 0)
      {
        dialogHandle_1.SetOutput(Translate("Do you want show the camera live view ?"));
        tmp_UserDialogReturnValueShowCameraLiveView = dialogHandle_1.ShowOutput(Translate("Camera live view"), hslYesNo | hslInformation | hslDefButton1, hslInfinite);
        if (tmp_UserDialogReturnValueShowCameraLiveView == 6)
        {
          ShowCameraLiveView = EASYPICKII::_HSLTRUE;
        }
        else
        {
          ShowCameraLiveView = EASYPICKII::_HSLFALSE;
        }
        tmp_ReturnValue = EASYPICKII::SETTINGS::SelectCameraSettings(SettingNameCamera, SettingNameCamera);
        if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
        {
          EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
          abort;
        }
        if (SettingNameCamera == "")
        {
          abort;
        }
        tmp_ReturnValue = EASYPICKII::SETTINGS::SelectColonySettings(SettingNameColony, SettingNameColony);
        if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
        {
          EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
          abort;
        }
        if (SettingNameColony == "")
        {
          abort;
        }
      }
    }
    if (ConfigurationWithDialogs != 0)
    {
      dialogHandle_2.SetInputSize(4);
      dialogHandle_2.SetInputField(0, Translate("Plate description:"), hslString, "Demo Plate");
      dialogHandle_2.SetInputField(1, Translate("Plate barcode:"), hslString, "Demo Barcode");
      dialogHandle_2.SetInputField(2, Translate("Maximum number of colonies per well:"), hslInteger, 9999, 1, 9999);
      dialogHandle_2.SetInputField(3, Translate("How many channels for picking:"), hslInteger, NoOfChannels, 1, NoOfChannels);
      dialogHandle_2.ShowInput(Translate("Plate Processing Information"), hslInfinite, hslOKOnly | hslDefButton1);
      PlateDescription = dialogHandle_2.GetInputField(0);
      PlateBarcode = dialogHandle_2.GetInputField(1);
      MaxColoniesPerWell = dialogHandle_2.GetInputField(2);
      MaxNumberOfChannelsForPicking = dialogHandle_2.GetInputField(3);
    }
    tmp_ReturnValue = EASYPICKII::GUI::Show(EASYPICKII::GUI::SHOW::MODE::_NORMAL);
    if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
    {
      EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
      abort;
    }
    if (ShowCameraLiveView == EASYPICKII::_HSLTRUE)
    {
      tmp_ReturnValue = EASYPICKII::GUI::LIVEVIEW::Show(EASYPICKII::GUI::SHOW::MODE::_NORMAL);
      if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
      {
        EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
        abort;
      }
      tmp_ReturnValue = EASYPICKII::CAMERA::Open(SettingNameCamera);
      if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
      {
        EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
        abort;
      }
    }
    tmp_ReturnValue = EASYPICKII_STEPS::easyStep_Light_On(ML_STAR, LightSource, LightIntensity);
    if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
    {
      EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
      abort;
    }
    tmp_ReturnValue = EASYPICKII::MLSTAR::Light_On(ML_STAR, EASYPICKII::EASYPICKII_HELPER::LIGHTSOURCE::_MLSTAR_DIV2_PWM1, LightIntensity);
    if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
    {
      EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
      abort;
    }
    MECC::TraceComment(Translate("Move pipetting arm out of the view of the camera."));
    ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    if (_EASYPICKII_SimulationMode == EASYPICKII::_HSLFALSE)
    {
      tmp_ReturnValue = EASYPICKII_STEPS::easyStep_Colony_TakePicture(ML_STAR, SettingNameCamera, EASYPICKII::_HSLTRUE);
      if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
      {
        EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
        abort;
      }
    }
    else
    {
      tmp_ReturnValue = EASYPICKII::CAMERA::LoadPicture("settings\\ColonyDemo\\Demo_Plate_gray.tif");
      if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
      {
        EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
        abort;
      }
    }
    if (ShowCameraLiveView == EASYPICKII::_HSLTRUE)
    {
      tmp_ReturnValue = EASYPICKII::GUI::LIVEVIEW::Hide();
      if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
      {
        EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
        abort;
      }
    }
    tmp_ReturnValue = EASYPICKII_STEPS::easyStep_Light_Off(ML_STAR, LightSource);
    if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
    {
      EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
      abort;
    }
    tmp_ReturnValue = EASYPICKII_STEPS::easyStep_Colony_Analyse(SettingNameColony, EASYPICKII::_HSLTRUE, PlateBarcode, PlateDescription, easyPickIIRackID);
    if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
    {
      EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
      abort;
    }
    tmp_ReturnValue = EASYPICKII::DATABASE::GetEasyPickIIRack(easyPickIIRackID, strRackBarcode, strRackPictureFilename, intRackWellsX, intRackWellsY, intRackErrorCode, strRackDescription);
    if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
    {
      EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
      abort;
    }
    intRackWells = intRackWellsX * intRackWellsY;
    arrintColoniesPerWell.SetSize(intRackWells);
    {
      for(loopCounterRackWellNumber = 0; loopCounterRackWellNumber < intRackWells;)
      {
        loopCounterRackWellNumber = loopCounterRackWellNumber + 1;
        arrintColoniesPerWell[ loopCounterRackWellNumber -1] = MaxColoniesPerWell;
      }
    }
    if( 0 == timerShowEasyPickIIMainWindow.SetTimer(ShowEasyPickIIMainWindow_TimeInSeconds) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == timerShowEasyPickIIMainWindow.WaitTimer(hslFalse, hslFalse) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    tmp_ReturnValue = EASYPICKII::GUI::Hide();
    if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
    {
      EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
      abort;
    }
    tmp_ReturnValue = EASYPICKII_STEPS::easyStep_Light_On(ML_STAR, LightSource, LightIntensity);
    if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
    {
      EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
      abort;
    }
    {
      loopCounterColoniesPickingCycle = 0;
      while (1 == 1)
      {
        loopCounterColoniesPickingCycle = loopCounterColoniesPickingCycle + 1;
        ChannelPatternForPicking = EASYPICKII::HELPER::MLSTAR::ChannelPattern_LeftAdjust(MaxNumberOfChannelsForPicking, NoOfChannels);
        tmp_ReturnValue = EASYPICKII_STEPS::easyStep_Colony_RetrieveColonyPositions(ML_STAR, "easypickii_adjust_small_0001", "Nunc_8WellDish_0001", "ml_star\\EasyPickII\\ColonySpot\\colony_spot.rck", easyPickIIRackID, arrintColoniesPerWell, ChannelPatternForPicking, UsedChannelPattern, UsedNumberOfColonies, TotalNumberOfColonies, ColonySequence, ArrayEasyPickColonyPropertyID, arrintChannelToWell);
        if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
        {
          EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
          abort;
        }
        if (UsedNumberOfColonies == 0)
        {
          EASYPICKII::GUI::Hide();
          break;
        }
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        {
          	variable arrRetValues[];
          	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          	AspirateStepReturn = arrRetValues[2];
        }
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        tmp_ReturnValue = EASYPICKII_STEPS::easyStep_Colony_UpdatePickingState(AspirateStepReturn, ArrayEasyPickColonyPropertyID);
        if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
        {
          EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
          abort;
        }
      }
    }
    EASYPICKII_STEPS::easyStep_DeInit(ML_STAR);
    TipCount::Write2(ML_STAR.MlStarStandardVolumeTips, TipCounterName, ML_STAR);
    EASYPICKII_STEPS::_ExitLibrary();
  } }
