 namespace _Method { #include "easyPickIILibrary\\easyPickII_Steps.hs_" }
 namespace _Method { #include "easyPickIILibrary\\easyPickII_Library.hsl" }
#include "MLSTARLet_LightTable.res"
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "easyPickIILibrary\\easyPickII_Helper.hsl" }
 namespace _Method { #include "HSLMlStarStepReturnLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "easyPickIILibrary\\easyPickII_FastPick.hsl" }
global device ML_STAR ("MLSTARLet_LightTable.lay", "ML_STAR", hslTrue);
variable loopCounterColoniesPickingCycle;
variable intRackErrorCode;
variable strRackDescription;
variable strRackBarcode;
variable intErrorCode;
variable blnSimulationMode;
variable strPlateLabwareID;
variable strReferencePointTopLeftLabwareID;
dialog customDialog_1;
dialog customDialog_2;
variable fltLightIntensity_pct;
variable intNumberOfColoniesToPick;
variable intTotalNumberOfColonies;
variable strColonySettingsName;
variable strCameraSettingsName;
variable intLightSource;
variable strRackPictureFile;
variable intLoopWell;
variable intMaxNumberOfChannelsToUse;
variable CameraPosX;
variable blnDryRun;
variable fltAspirateAtFixHeight_mm;
variable CameraPosY;
variable intRackContainersX;
variable fltEasyPickMainWindowTimeout_s;
variable blnShowProcessingColonies;
variable intContainerCount;
variable strPlateDescription;
variable intRackContainersY;
variable strAspirateStepReturn;
variable intMaxNumberOfColoniesToPickFromContainer;
variable strTipCounterName;
variable intColonyIDsIndex;
variable blnFastPick;
variable fltAddToAgarHeight_mm;
variable fltAgarHeightRelativeToReferencePoints_mm;
variable strChannelPatternUsed;
variable intColonyID;
variable blnMeasureAgarHeight;
variable intComboBoxIndexColonySettingsName;
variable blnShowConfigurationDialog;
variable intDialogResult;
variable intComboBoxIndexCameraSettingsName;
variable fltTipCountingDialogTimeout_s;
variable intTipsSequenceCounting;
variable intRackID;
variable intNumberOfChannels;
variable intComboBoxIndexLightSource;
variable strChannelPatternUsable;
variable blnShowCameraLiveView;
variable intColonyIDsArraySize;
variable strPlateBarcode;
variable fltAgarHeightRelativeToPlate_mm;
sequence seqColonyPositions;
variable arrstrColonySettingsNames[];
variable arrintMaxNumberOfColoniesToPick[];
variable arrintColonyIDs[];
variable arrstrLightSourceNames[];
variable arrintContainerNumbers[];
variable arrstrCameraSettingsNames[];
variable fltPickHeightOverAgar;
variable fltPickHeightOverPlate;
variable strColonyPickLiquidClassName;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    EASYPICKII_STEPS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    intErrorCode = EASYPICKII_STEPS::easyStep_Init(ML_STAR, EASYPICKII::_TRACE_LEVEL_FULL, EASYPICKII::_HSLTRUE);
    if (intErrorCode != 0)
    {
      EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
      abort;
    }
    EASYPICKII::INIT::GetSimulationMode(blnSimulationMode);
    blnShowConfigurationDialog = EASYPICKII::_HSLTRUE;
    blnDryRun = EASYPICKII::_HSLTRUE;
    blnMeasureAgarHeight = EASYPICKII::_HSLTRUE;
    blnFastPick = EASYPICKII::_HSLFALSE;
    blnShowProcessingColonies = EASYPICKII::_HSLTRUE;
    fltAddToAgarHeight_mm = 0;
    fltPickHeightOverAgar = 3;
    fltPickHeightOverPlate = 10;
    intLightSource = EASYPICKII::EASYPICKII_HELPER::LIGHTSOURCE::_MLSTAR_DIV3_PWM3;
    fltLightIntensity_pct = 50;
    blnShowCameraLiveView = EASYPICKII::_HSLTRUE;
    if (blnSimulationMode == 0)
    {
      strCameraSettingsName = "default";
      strColonySettingsName = "LightTable-Template";
    }
    else
    {
      blnMeasureAgarHeight = EASYPICKII::_HSLFALSE;
      blnShowCameraLiveView = EASYPICKII::_HSLFALSE;
      strCameraSettingsName = "default";
      strColonySettingsName = "Demo_Plate_gray";
    }
    CameraPosX = 46.0;
    CameraPosY = -50.0;
    strTipCounterName = "StandardVolumeTips";
    strPlateBarcode = Translate("Demo Barcode");
    strPlateDescription = Translate("Demo Plate Description");
    intMaxNumberOfColoniesToPickFromContainer = 16;
    intNumberOfChannels = EASYPICKII::HELPER::MLSTAR::GetNumberOfPipettingChannels(ML_STAR);
    intMaxNumberOfChannelsToUse = intNumberOfChannels;
    fltEasyPickMainWindowTimeout_s = 3;
    fltTipCountingDialogTimeout_s = 60;
    strPlateLabwareID = "Nunc_8WellDish_0001";
    strReferencePointTopLeftLabwareID = "easypickii_adjust_small_0001";
    if (blnShowConfigurationDialog == 0)
    {
      fltTipCountingDialogTimeout_s = 1;
    }
    TipCount::Edit2(ML_STAR.MlStarStandardVolumeTips, strTipCounterName, ML_STAR, fltTipCountingDialogTimeout_s);
    if (blnSimulationMode == 0)
    {
      if (blnShowConfigurationDialog != 0)
      {
        arrstrLightSourceNames.SetSize(0);
        arrstrLightSourceNames.AddAsLast(Translate("No Light"));
        arrstrLightSourceNames.AddAsLast(Translate("1st power supply on DIV 2 plug"));
        arrstrLightSourceNames.AddAsLast(Translate("2nd power supply on DIV 2 plug"));
        arrstrLightSourceNames.AddAsLast(Translate("1st power supply on DIV 3 plug"));
        arrstrLightSourceNames.AddAsLast(Translate("2nd power supply on DIV 3 plug"));
        arrstrLightSourceNames.AddAsLast(Translate("Light on camera channel"));
        intErrorCode = EASYPICKII::SETTINGS::GetCameraSettingsNamesList(arrstrCameraSettingsNames);
        if (intErrorCode != 0)
        {
          EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
          abort;
        }
        intErrorCode = EASYPICKII::SETTINGS::GetColonySettingsNamesList(arrstrColonySettingsNames);
        if (intErrorCode != 0)
        {
          EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
          abort;
        }
        intComboBoxIndexCameraSettingsName = ArrStr_FindIndex(arrstrCameraSettingsNames, strCameraSettingsName);
        intComboBoxIndexColonySettingsName = ArrStr_FindIndex(arrstrColonySettingsNames, strColonySettingsName);
        intComboBoxIndexLightSource = intLightSource + 1;
        customDialog_2.InitCustomDialog("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");
        customDialog_2.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", arrstrCameraSettingsNames );
        customDialog_2.SetCustomDialogArrayProperty( "comboBox3.ItemsSource", arrstrColonySettingsNames );
        customDialog_2.SetCustomDialogArrayProperty( "comboBox4.ItemsSource", arrstrLightSourceNames );
        customDialog_2.SetCustomDialogProperty( "checkBox1.IsChecked", blnShowCameraLiveView );
        customDialog_2.SetCustomDialogProperty( "comboBox1.Text", strCameraSettingsName );
        customDialog_2.SetCustomDialogProperty( "comboBox1.SelectedIndex", intComboBoxIndexCameraSettingsName );
        customDialog_2.SetCustomDialogProperty( "comboBox3.SelectedIndex", intComboBoxIndexColonySettingsName );
        customDialog_2.SetCustomDialogProperty( "comboBox3.Text", strColonySettingsName );
        customDialog_2.SetCustomDialogProperty( "checkBox2.IsChecked", blnMeasureAgarHeight );
        customDialog_2.SetCustomDialogProperty( "checkBox3.IsChecked", blnDryRun );
        customDialog_2.SetCustomDialogProperty( "numeric1.Value", fltLightIntensity_pct );
        customDialog_2.SetCustomDialogProperty( "comboBox4.SelectedIndex", intComboBoxIndexLightSource );
        customDialog_2.SetCustomDialogProperty( "numericAgarHeighCorrection.Value", fltAddToAgarHeight_mm );
        customDialog_2.SetCustomDialogProperty( "numericPickHeightOverAgar.Value", fltPickHeightOverAgar );
        customDialog_2.SetCustomDialogProperty( "numericPickHeightOverPlate.Value", fltPickHeightOverPlate );
        customDialog_2.SetCustomDialogProperty( "checkBox4.IsChecked", blnFastPick );
        customDialog_2.ShowCustomDialog();
        intDialogResult = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
        blnShowCameraLiveView = customDialog_2.GetCustomDialogProperty( "checkBox1.IsChecked" );
        strCameraSettingsName = customDialog_2.GetCustomDialogProperty( "comboBox1.Text" );
        intComboBoxIndexCameraSettingsName = customDialog_2.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
        intComboBoxIndexColonySettingsName = customDialog_2.GetCustomDialogProperty( "comboBox3.SelectedIndex" );
        strColonySettingsName = customDialog_2.GetCustomDialogProperty( "comboBox3.Text" );
        blnMeasureAgarHeight = customDialog_2.GetCustomDialogProperty( "checkBox2.IsChecked" );
        blnDryRun = customDialog_2.GetCustomDialogProperty( "checkBox3.IsChecked" );
        fltLightIntensity_pct = customDialog_2.GetCustomDialogProperty( "numeric1.Value" );
        intComboBoxIndexLightSource = customDialog_2.GetCustomDialogProperty( "comboBox4.SelectedIndex" );
        fltAddToAgarHeight_mm = customDialog_2.GetCustomDialogProperty( "numericAgarHeighCorrection.Value" );
        fltPickHeightOverAgar = customDialog_2.GetCustomDialogProperty( "numericPickHeightOverAgar.Value" );
        fltPickHeightOverPlate = customDialog_2.GetCustomDialogProperty( "numericPickHeightOverPlate.Value" );
        blnFastPick = customDialog_2.GetCustomDialogProperty( "checkBox4.IsChecked" );
        if (intDialogResult == 2)
        {
          abort;
        }
        intLightSource = intComboBoxIndexLightSource - 1;
      }
    }
    if (blnShowConfigurationDialog != 0)
    {
      customDialog_1.InitCustomDialog("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");
      customDialog_1.SetCustomDialogProperty( "textBox1.Text", strPlateBarcode );
      customDialog_1.SetCustomDialogProperty( "textBox2.Text", strPlateDescription );
      customDialog_1.SetCustomDialogProperty( "numeric1.Value", intMaxNumberOfColoniesToPickFromContainer );
      customDialog_1.SetCustomDialogProperty( "numeric2.Maximum", intNumberOfChannels );
      customDialog_1.SetCustomDialogProperty( "numeric2.Value", intMaxNumberOfChannelsToUse );
      customDialog_1.ShowCustomDialog();
      strPlateBarcode = customDialog_1.GetCustomDialogProperty( "textBox1.Text" );
      strPlateDescription = customDialog_1.GetCustomDialogProperty( "textBox2.Text" );
      intMaxNumberOfColoniesToPickFromContainer = customDialog_1.GetCustomDialogProperty( "numeric1.Value" );
      intMaxNumberOfChannelsToUse = customDialog_1.GetCustomDialogProperty( "numeric2.Value" );
    }
    if (blnMeasureAgarHeight != 0)
    {
      MeasureAgarHeight(ML_STAR.Nunc_8WellDish_0001, strReferencePointTopLeftLabwareID, strPlateLabwareID, fltAgarHeightRelativeToReferencePoints_mm, fltAgarHeightRelativeToPlate_mm);
      fltAgarHeightRelativeToReferencePoints_mm = fltAgarHeightRelativeToReferencePoints_mm + fltAddToAgarHeight_mm;
    }
    intErrorCode = EASYPICKII_STEPS::easyStep_Light_On(ML_STAR, intLightSource, fltLightIntensity_pct);
    if (intErrorCode != 0)
    {
      EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
      abort;
    }
    MECC::TraceComment(Translate("Place camera above plate."));
    intErrorCode = EASYPICKII_STEPS::easyStep_Camera_Place_to_Labware(ML_STAR, strReferencePointTopLeftLabwareID, 50, -53.0, 0);
    if (intErrorCode != 0)
    {
      EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
      abort;
    }
    if (blnShowCameraLiveView != 0)
    {
      intErrorCode = EASYPICKII::GUI::LIVEVIEW::Show(EASYPICKII::GUI::SHOW::MODE::_NORMAL);
      if (intErrorCode != 0)
      {
        EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
        abort;
      }
      intErrorCode = EASYPICKII::CAMERA::Open(strCameraSettingsName);
      if (intErrorCode != 0)
      {
        EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
        abort;
      }
    }
    if (blnSimulationMode == 0)
    {
      intErrorCode = EASYPICKII_STEPS::easyStep_Colony_TakePicture(ML_STAR, strCameraSettingsName, EASYPICKII::_HSLTRUE);
      if (intErrorCode != 0)
      {
        EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
        abort;
      }
    }
    else
    {
      intErrorCode = EASYPICKII::CAMERA::LoadPicture("settings\\ColonyDemo\\Demo_Plate_gray.tif");
      if (intErrorCode != 0)
      {
        EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
        abort;
      }
    }
    if (blnShowCameraLiveView != 0)
    {
      intErrorCode = EASYPICKII::GUI::LIVEVIEW::Hide();
      if (intErrorCode != 0)
      {
        EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
        abort;
      }
    }
    intErrorCode = EASYPICKII_STEPS::easyStep_Light_Off(ML_STAR, intLightSource);
    if (intErrorCode != 0)
    {
      EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
      abort;
    }
    intErrorCode = EASYPICKII::GUI::Show(EASYPICKII::GUI::SHOW::MODE::_NORMAL);
    if (intErrorCode != 0)
    {
      EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
      abort;
    }
    if (blnMeasureAgarHeight == 0)
    {
      intErrorCode = EASYPICKII_STEPS::easyStep_Colony_Analyse2(strColonySettingsName, EASYPICKII::_HSLFALSE, 0.0, EASYPICKII::_HSLTRUE, EASYPICKII::_HSLTRUE, strPlateBarcode, strPlateDescription, intRackID);
      if (intErrorCode != 0)
      {
        EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
        abort;
      }
    }
    else
    {
      intErrorCode = EASYPICKII_STEPS::easyStep_Colony_Analyse2(strColonySettingsName, EASYPICKII::_HSLTRUE, fltAgarHeightRelativeToReferencePoints_mm, EASYPICKII::_HSLTRUE, EASYPICKII::_HSLTRUE, strPlateBarcode, strPlateDescription, intRackID);
      if (intErrorCode != 0)
      {
        EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
        abort;
      }
    }
    intErrorCode = EASYPICKII::DATABASE::GetEasyPickIIRack(intRackID, strRackBarcode, strRackPictureFile, intRackContainersX, intRackContainersY, intRackErrorCode, strRackDescription);
    if (intErrorCode != 0)
    {
      EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
      abort;
    }
    intContainerCount = intRackContainersX * intRackContainersY;
    arrintMaxNumberOfColoniesToPick.SetSize(intContainerCount);
    {
      for(intLoopWell = 0; intLoopWell < intContainerCount;)
      {
        intLoopWell = intLoopWell + 1;
        arrintMaxNumberOfColoniesToPick[ intLoopWell -1] = intMaxNumberOfColoniesToPickFromContainer;
      }
    }
    intErrorCode = EASYPICKII::GUI::Hide();
    if (intErrorCode != 0)
    {
      EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
      abort;
    }
    intErrorCode = EASYPICKII_STEPS::easyStep_Light_On(ML_STAR, intLightSource, fltLightIntensity_pct);
    if (intErrorCode != 0)
    {
      EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
      abort;
    }
    if (blnShowProcessingColonies != 0)
    {
      EASYPICKII::GUI::Show(EASYPICKII::GUI::SHOW::MODE::_NORMAL);
    }
    {
      loopCounterColoniesPickingCycle = 0;
      while (1 == 1)
      {
        loopCounterColoniesPickingCycle = loopCounterColoniesPickingCycle + 1;
        if (blnShowProcessingColonies != 0)
        {
          EASYPICKII::GUI::PICTUREVIEW::Clear();
        }
        strChannelPatternUsable = EASYPICKII::HELPER::MLSTAR::ChannelPattern_LeftAdjust(intMaxNumberOfChannelsToUse, intNumberOfChannels);
        intErrorCode = EASYPICKII_STEPS::easyStep_Colony_RetrieveColonyPositions2(ML_STAR, strReferencePointTopLeftLabwareID, strPlateLabwareID, "ml_star\\EasyPickII\\ColonySpot\\colony_spot.rck", intRackID, arrintMaxNumberOfColoniesToPick, EASYPICKII::DATABASE::COLONYPOSITIONS_SORTMODE::SORT_WEIGHT_DESC, strChannelPatternUsable, strChannelPatternUsed, intNumberOfColoniesToPick, intTotalNumberOfColonies, seqColonyPositions, arrintColonyIDs, arrintContainerNumbers);
        if (intErrorCode != 0)
        {
          EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
          abort;
        }
        if (intNumberOfColoniesToPick == 0)
        {
          EASYPICKII::GUI::Hide();
          break;
        }
        if (blnShowProcessingColonies != 0)
        {
          intColonyIDsArraySize=arrintColonyIDs.GetSize();
          {
            for(intColonyIDsIndex = 0; intColonyIDsIndex < intColonyIDsArraySize;)
            {
              intColonyIDsIndex = intColonyIDsIndex + 1;
              intColonyID=arrintColonyIDs.GetAt(intColonyIDsIndex-1);
              if (intColonyID != -1)
              {
                EASYPICKII::GUI::PICTUREVIEW::DisplayColony(intColonyID);
              }
            }
          }
        }
        if (blnDryRun == 0)
        {
          intTipsSequenceCounting = 1;
        }
        else
        {
          intTipsSequenceCounting = 0;
        }
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        if (blnMeasureAgarHeight == 0)
        {
          fltAspirateAtFixHeight_mm = 0.0 + fltPickHeightOverPlate;
        }
        else
        {
          fltAspirateAtFixHeight_mm = fltAgarHeightRelativeToPlate_mm + fltPickHeightOverAgar;
        }
        if (blnFastPick == 0)
        {
          strColonyPickLiquidClassName = "EasyPickII_LongDuration";
          strColonyPickLiquidClassName = "EasyPickII";
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            	strAspirateStepReturn = arrRetValues[2];
          }
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        else
        {
          intErrorCode = EASYPICKII_FASTPICK::Pick(ML_STAR, strPlateLabwareID, seqColonyPositions, strChannelPatternUsed, fltAspirateAtFixHeight_mm, 25);
        }
        if (blnDryRun == 0)
        {
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
        else
        {
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
        if (blnFastPick == 0)
        {
          intErrorCode = EASYPICKII_STEPS::easyStep_Colony_UpdatePickingState(strAspirateStepReturn, arrintColonyIDs);
          if (intErrorCode != 0)
          {
            EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
            abort;
          }
        }
        else
        {
          intColonyIDsArraySize=arrintColonyIDs.GetSize();
          {
            for(intColonyIDsIndex = 0; intColonyIDsIndex < intColonyIDsArraySize;)
            {
              intColonyIDsIndex = intColonyIDsIndex + 1;
              intColonyID=arrintColonyIDs.GetAt(intColonyIDsIndex-1);
              if (intColonyID != -1)
              {
                intErrorCode = EASYPICKII::DATABASE::SetEasyPickIIColonyPickingState(intColonyID, EASYPICKII::DATABASE::PICKINGSTATE::_OK);
                if (intErrorCode != 0)
                {
                  EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
                  abort;
                }
              }
            }
          }
        }
      }
    }
    EASYPICKII_STEPS::easyStep_DeInit(ML_STAR);
    TipCount::Write2(ML_STAR.MlStarStandardVolumeTips, strTipCounterName, ML_STAR);
    EASYPICKII_STEPS::_ExitLibrary();
  } }
