private function ArrStr_FindIndex( variable & arrstrStrings[], variable strValue ) variable ;
private function MeasureAgarHeight( sequence i_seqLLDPositionOnPlate, variable i_strReferencePointsLabwareID, variable i_strPlateLabwareID, variable & o_fltAgarHeighRelativeToReferencePoints_mm, variable & o_fltAgarHeightRelativeToPlate_mm ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  EASYPICKII_STEPS::easyStep_DeInit(ML_STAR);
  TipCount::Write2(ML_STAR.MlStarStandardVolumeTips, strTipCounterName, ML_STAR);
}

private function MeasureAgarHeight( sequence i_seqLLDPositionOnPlate, variable i_strReferencePointsLabwareID, variable i_strPlateLabwareID, variable & o_fltAgarHeighRelativeToReferencePoints_mm, variable & o_fltAgarHeightRelativeToPlate_mm ) void {
  private variable intLLDMainErrorCode;
  private variable strLLDHeigh;
  private variable intStepReturnLLDPositions;
  private variable fltReferencePointZ_mm;
  private variable fltPlateZ_mm;
  private variable fltReferencePointY_mm;
  private variable fltPlateY_mm;
  private variable fltLLDHeight;
  private variable fltReferencePointX_mm;
  private variable fltPlateX_mm;
  private variable strStepReturnLiquidLevels;
  o_fltAgarHeighRelativeToReferencePoints_mm = 0;
  o_fltAgarHeightRelativeToPlate_mm = 0;
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  {
    	variable arrRetValues[];
    	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
    	strStepReturnLiquidLevels = arrRetValues[2];
  }
  Trace("strStepReturnLiquidLevels: ", strStepReturnLiquidLevels);
  intStepReturnLLDPositions = StepReturn::GetNumberOfPositions(strStepReturnLiquidLevels);
  intLLDMainErrorCode = StepReturn::GetMainError(1, strStepReturnLiquidLevels);
  strLLDHeigh = StepReturn::GetStepData(1, strStepReturnLiquidLevels);
  fltLLDHeight = StrFVal(strLLDHeigh);
  intErrorCode = EASYPICKII::HELPER::LABWARE::GetPositionCoordinates_by_Labware(ML_STAR, i_strReferencePointsLabwareID, fltReferencePointX_mm, fltReferencePointY_mm, fltReferencePointZ_mm);
  if (intErrorCode != 0)
  {
    EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
    abort;
  }
  intErrorCode = EASYPICKII::HELPER::LABWARE::GetPositionCoordinates_by_Labware(ML_STAR, i_strPlateLabwareID, fltPlateX_mm, fltPlateY_mm, fltPlateZ_mm);
  if (intErrorCode != 0)
  {
    EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
    abort;
  }
  o_fltAgarHeightRelativeToPlate_mm = fltLLDHeight - fltPlateZ_mm;
  o_fltAgarHeighRelativeToReferencePoints_mm = fltLLDHeight - fltReferencePointZ_mm;
  Trace("o_fltAgarHeighRelativeToReferencePoints_mm: ", o_fltAgarHeighRelativeToReferencePoints_mm);
  Trace("o_fltAgarHeightRelativeToPlate_mm: ", o_fltAgarHeightRelativeToPlate_mm);
}

private function ArrStr_FindIndex( variable & arrstrStrings[], variable strValue ) variable {
  private variable intIndex;
  private variable intSize;
  intSize=arrstrStrings.GetSize();
  {
    for(intIndex = 0; intIndex < intSize;)
    {
      intIndex = intIndex + 1;
      if (arrstrStrings.ElementAt( intIndex -1) == strValue)
      {
        return (intIndex);
      }
    }
  }
  return (0);
}
