 namespace _Method { #include "easyPickIILibrary\\easyPickII_Steps.hs_" }
 namespace _Method { #include "easyPickIILibrary\\easyPickII_Library.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
#include "MLSTAR_LightTableXL.res"
variable tmp_ReturnValue;
variable SettingNameCamera;
variable ShowCameraLiveView;
variable tmp_UserDialogReturnValueShowCameraLiveView;
variable LightSource;
variable LightIntensity;
variable tmp_Result_Barcode;
variable tmp_Result_ErrorCode;
variable SettingNameColony;
variable MaxColoniesPerWell;
variable PlateBarcode;
variable NoOfChannels;
variable PlateDescription;
variable MaxNumberOfChannelsForPicking;
variable SectionsX;
variable SectionsY;
variable tmp_Result_PictureFile;
variable PlateSections;
variable tmp_Result_Description;
variable loopCounterColoniesPickingCycle;
variable ChannelPatternForPicking;
variable UsedNumberOfColonies;
variable UsedChannelPattern;
variable AspirateStepReturn;
variable TotalNumberOfColonies;
sequence ColonySequence;
variable ArrayEasyPickColonyPropertyID[];
variable easyPickIIRackID;
variable TipCounterName;
variable intLoopWell;
variable arrintChannelToWell[];
variable arrintColoniesPerWell[];
variable SettingNameImageStitcher;
dialog dialogHandle_1;
dialog dialogHandle_2;
variable ShowEasyPickIIMainWindow_TimeInSeconds;
timer timerShowEasyPickIIMainWindow;
variable ShowHSLTipCountingDialog_TimeInSeconds;
global device ML_STAR ("MLSTAR_LightTableXL.lay", "ML_STAR", hslTrue);
variable StitcherPictureID;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    EASYPICKII_STEPS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    tmp_ReturnValue = EASYPICKII_STEPS::easyStep_Init(ML_STAR, EASYPICKII::_TRACE_LEVEL_FULL, EASYPICKII::_HSLTRUE);
    if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
    {
      EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
      abort;
    }
    LightSource = EASYPICKII::EASYPICKII_HELPER::LIGHTSOURCE::_MLSTAR_DIV3_PWM3;
    LightIntensity = 100;
    if (_EASYPICKII_SimulationMode == 0)
    {
      SettingNameCamera = "default";
      SettingNameColony = "LightTableXL Hole-Punch";
      SettingNameImageStitcher = "LightTableXL 1.1";
    }
    else
    {
      SettingNameCamera = "default";
      SettingNameColony = "Demo_QTray-Plate";
      SettingNameImageStitcher = "Demo_QTray-Plate";
    }
    ShowCameraLiveView = EASYPICKII::_HSLTRUE;
    TipCounterName = "StandardVolumeTips";
    PlateBarcode = Translate("");
    PlateDescription = Translate("");
    MaxColoniesPerWell = 16;
    NoOfChannels = EASYPICKII::HELPER::MLSTAR::GetNumberOfPipettingChannels(ML_STAR);
    MaxNumberOfChannelsForPicking = NoOfChannels;
    ShowEasyPickIIMainWindow_TimeInSeconds = 3;
    ShowHSLTipCountingDialog_TimeInSeconds = 60;
    ShowHSLTipCountingDialog_TimeInSeconds = 1;
    TipCount::Edit2(ML_STAR.MlStar300ulStandardVolumeTip, TipCounterName, ML_STAR, ShowHSLTipCountingDialog_TimeInSeconds);
    if (_EASYPICKII_SimulationMode == EASYPICKII::_HSLFALSE)
    {
      dialogHandle_1.SetOutput(Translate("Do you want show the camera live view ?"));
      tmp_UserDialogReturnValueShowCameraLiveView = dialogHandle_1.ShowOutput(Translate("Camera live view"), hslYesNo | hslInformation | hslDefButton1, hslInfinite);
      if (tmp_UserDialogReturnValueShowCameraLiveView == 6)
      {
        ShowCameraLiveView = EASYPICKII::_HSLTRUE;
      }
      else
      {
        ShowCameraLiveView = EASYPICKII::_HSLFALSE;
      }
      tmp_ReturnValue = EASYPICKII::SETTINGS::SelectCameraSettings(SettingNameCamera, SettingNameCamera);
      if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
      {
        EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
        abort;
      }
      if (SettingNameCamera == "")
      {
        abort;
      }
      tmp_ReturnValue = EASYPICKII::SETTINGS::SelectImageStitcherSettings(SettingNameImageStitcher, SettingNameImageStitcher);
      if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
      {
        EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
        abort;
      }
      if (SettingNameImageStitcher == "")
      {
        abort;
      }
      tmp_ReturnValue = EASYPICKII::SETTINGS::SelectColonySettings(SettingNameColony, SettingNameColony);
      if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
      {
        EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
        abort;
      }
      if (SettingNameColony == "")
      {
        abort;
      }
    }
    dialogHandle_2.SetInputSize(4);
    dialogHandle_2.SetInputField(0, Translate("Plate description:"), hslString, "Demo Plate");
    dialogHandle_2.SetInputField(1, Translate("Plate barcode:"), hslString, "Demo Barcode");
    dialogHandle_2.SetInputField(2, Translate("Maximum number of colonies per well:"), hslInteger, 9999, 1, 9999);
    dialogHandle_2.SetInputField(3, Translate("How many channels for picking:"), hslInteger, NoOfChannels, 1, NoOfChannels);
    dialogHandle_2.ShowInput(Translate("Plate Processing Information"), hslInfinite, hslOKOnly | hslDefButton1);
    PlateDescription = dialogHandle_2.GetInputField(0);
    PlateBarcode = dialogHandle_2.GetInputField(1);
    MaxColoniesPerWell = dialogHandle_2.GetInputField(2);
    MaxNumberOfChannelsForPicking = dialogHandle_2.GetInputField(3);
    tmp_ReturnValue = EASYPICKII::GUI::Show(EASYPICKII::GUI::SHOW::MODE::_NORMAL);
    Stitch_QTray_Picture(SettingNameCamera, SettingNameImageStitcher, PlateBarcode, PlateDescription, ShowCameraLiveView, StitcherPictureID);
    Pick_QTray_Picture(SettingNameColony, StitcherPictureID, PlateBarcode, PlateDescription);
    tmp_ReturnValue = EASYPICKII::GUI::Hide();
    if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
    {
      EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
      abort;
    }
    EASYPICKII_STEPS::easyStep_DeInit(ML_STAR);
    TipCount::Write2(ML_STAR.MlStar300ulStandardVolumeTip, TipCounterName, ML_STAR);
    EASYPICKII_STEPS::_ExitLibrary();
  } }
