private function Pick_QTray_Picture( variable i_strColonySettings, variable i_intStitcherPictureID, variable i_strPlateBarcode, variable i_strPlateDescription ) void ;
private function Stitch_QTray_Picture( variable i_strCameraSettings, variable i_strStitcherSettings, variable i_strPlateBarcode, variable i_strPlateDescription, variable i_blnShowCameraLiveView, variable o_intStitcherPictureID ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  EASYPICKII_STEPS::easyStep_DeInit(ML_STAR);
  TipCount::Write2(ML_STAR.MlStar300ulStandardVolumeTip, TipCounterName, ML_STAR);
}

private function Stitch_QTray_Picture( variable i_strCameraSettings, variable i_strStitcherSettings, variable i_strPlateBarcode, variable i_strPlateDescription, variable i_blnShowCameraLiveView, variable o_intStitcherPictureID ) void {
  private variable intCameraPosXLeft;
  private variable intCameraPosXRight;
  private variable intCameraPosY0;
  private variable intCameraPosY1;
  private variable intCameraPosY2;
  intCameraPosXLeft = 65;
  intCameraPosXRight = 185;
  intCameraPosY0 = -50;
  intCameraPosY1 = -130;
  intCameraPosY2 = -210;
  tmp_ReturnValue = EASYPICKII::GUI::Show(EASYPICKII::GUI::SHOW::MODE::_NORMAL);
  if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
  {
    EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
    abort;
  }
  if (i_blnShowCameraLiveView == EASYPICKII::_HSLTRUE)
  {
    tmp_ReturnValue = EASYPICKII::GUI::LIVEVIEW::Show(EASYPICKII::GUI::SHOW::MODE::_NORMAL);
    if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
    {
      EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
      abort;
    }
    tmp_ReturnValue = EASYPICKII::CAMERA::Open(i_strCameraSettings);
    if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
    {
      EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
      abort;
    }
  }
  tmp_ReturnValue = EASYPICKII_STEPS::easyStep_Light_On(ML_STAR, LightSource, LightIntensity);
  if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
  {
    EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
    abort;
  }
  if (_EASYPICKII_SimulationMode == EASYPICKII::_HSLFALSE)
  {
    tmp_ReturnValue = EASYPICKII_STEPS::easyStep_ImageStitcher_TakePictures(ML_STAR, "easypickii_adjust_xl_small_0001", SettingNameCamera, intCameraPosXLeft, intCameraPosXRight, intCameraPosY0, intCameraPosY1, intCameraPosY2);
    if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
    {
      EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
      abort;
    }
  }
  else
  {
    tmp_ReturnValue = EASYPICKII::CAMERA::LoadPicture("settings\\ImageStitcherDemo\\QTray-Plate-01.png");
    if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
    {
      EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
      abort;
    }
    tmp_ReturnValue = EASYPICKII::IMAGE_STITCHER::AssignPicturePosition(0);
    if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
    {
      EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
      abort;
    }
    tmp_ReturnValue = EASYPICKII::CAMERA::LoadPicture("settings\\ImageStitcherDemo\\QTray-Plate-02.png");
    if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
    {
      EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
      abort;
    }
    tmp_ReturnValue = EASYPICKII::IMAGE_STITCHER::AssignPicturePosition(1);
    if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
    {
      EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
      abort;
    }
    tmp_ReturnValue = EASYPICKII::CAMERA::LoadPicture("settings\\ImageStitcherDemo\\QTray-Plate-03.png");
    if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
    {
      EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
      abort;
    }
    tmp_ReturnValue = EASYPICKII::IMAGE_STITCHER::AssignPicturePosition(2);
    if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
    {
      EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
      abort;
    }
    tmp_ReturnValue = EASYPICKII::CAMERA::LoadPicture("settings\\ImageStitcherDemo\\QTray-Plate-04.png");
    if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
    {
      EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
      abort;
    }
    tmp_ReturnValue = EASYPICKII::IMAGE_STITCHER::AssignPicturePosition(3);
    if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
    {
      EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
      abort;
    }
    tmp_ReturnValue = EASYPICKII::CAMERA::LoadPicture("settings\\ImageStitcherDemo\\QTray-Plate-05.png");
    if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
    {
      EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
      abort;
    }
    tmp_ReturnValue = EASYPICKII::IMAGE_STITCHER::AssignPicturePosition(4);
    if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
    {
      EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
      abort;
    }
    tmp_ReturnValue = EASYPICKII::CAMERA::LoadPicture("settings\\ImageStitcherDemo\\QTray-Plate-06.png");
    if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
    {
      EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
      abort;
    }
    tmp_ReturnValue = EASYPICKII::IMAGE_STITCHER::AssignPicturePosition(5);
    if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
    {
      EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
      abort;
    }
  }
  if (ShowCameraLiveView == EASYPICKII::_HSLTRUE)
  {
    tmp_ReturnValue = EASYPICKII::GUI::LIVEVIEW::Hide();
    if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
    {
      EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
      abort;
    }
  }
  tmp_ReturnValue = EASYPICKII_STEPS::easyStep_Light_Off(ML_STAR, LightSource);
  if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
  {
    EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
    abort;
  }
  tmp_ReturnValue = EASYPICKII_STEPS::easyStep_ImageStitcher_Stitch(i_strStitcherSettings, EASYPICKII::_HSLFALSE, EASYPICKII::_HSLFALSE, i_strPlateBarcode, i_strPlateDescription, o_intStitcherPictureID);
  if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
  {
    EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
    abort;
  }
}

private function Pick_QTray_Picture( variable i_strColonySettings, variable i_intStitcherPictureID, variable i_strPlateBarcode, variable i_strPlateDescription ) void {
  tmp_ReturnValue = EASYPICKII_STEPS::easyStep_Colony_Analyse(i_strColonySettings, EASYPICKII::_HSLTRUE, i_strPlateBarcode, i_strPlateDescription, easyPickIIRackID);
  if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
  {
    EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
    abort;
  }
  tmp_ReturnValue = EASYPICKII::DATABASE::SetEasyPickIIRack_Field_ImageStitcherID(easyPickIIRackID, i_intStitcherPictureID);
  if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
  {
    EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
    abort;
  }
  tmp_ReturnValue = EASYPICKII::DATABASE::GetEasyPickIIRack(easyPickIIRackID, tmp_Result_Barcode, tmp_Result_PictureFile, SectionsX, SectionsY, tmp_Result_ErrorCode, tmp_Result_Description);
  if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
  {
    EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
    abort;
  }
  PlateSections = SectionsX * SectionsY;
  arrintColoniesPerWell.SetSize(PlateSections);
  {
    for(intLoopWell = 0; intLoopWell < PlateSections;)
    {
      intLoopWell = intLoopWell + 1;
      arrintColoniesPerWell[ intLoopWell -1] = MaxColoniesPerWell;
    }
  }
  if( 0 == timerShowEasyPickIIMainWindow.SetTimer(ShowEasyPickIIMainWindow_TimeInSeconds) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == timerShowEasyPickIIMainWindow.WaitTimer(hslFalse, hslFalse) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  tmp_ReturnValue = EASYPICKII::GUI::Hide();
  if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
  {
    EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
    abort;
  }
  tmp_ReturnValue = EASYPICKII_STEPS::easyStep_Light_On(ML_STAR, LightSource, LightIntensity);
  if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
  {
    EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
    abort;
  }
  {
    loopCounterColoniesPickingCycle = 0;
    while (1 == 1)
    {
      loopCounterColoniesPickingCycle = loopCounterColoniesPickingCycle + 1;
      ChannelPatternForPicking = EASYPICKII::HELPER::MLSTAR::ChannelPattern_LeftAdjust(MaxNumberOfChannelsForPicking, NoOfChannels);
      tmp_ReturnValue = EASYPICKII_STEPS::easyStep_Colony_RetrieveColonyPositions(ML_STAR, "easypickii_adjust_xl_small_0001", "QTray_0001", "ml_star\\EasyPickII\\ColonySpot\\colony_spot.rck", easyPickIIRackID, arrintColoniesPerWell, ChannelPatternForPicking, UsedChannelPattern, UsedNumberOfColonies, TotalNumberOfColonies, ColonySequence, ArrayEasyPickColonyPropertyID, arrintChannelToWell);
      if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
      {
        EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
        abort;
      }
      if (UsedNumberOfColonies == 0)
      {
        EASYPICKII::GUI::Hide();
        break;
      }
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        	AspirateStepReturn = arrRetValues[2];
      }
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      tmp_ReturnValue = EASYPICKII_STEPS::easyStep_Colony_UpdatePickingState(AspirateStepReturn, ArrayEasyPickColonyPropertyID);
      if (tmp_ReturnValue != EASYPICKII::ERROR::_NONE)
      {
        EASYPICKII_STEPS::ShowErrorDialog(tmp_ReturnValue);
        abort;
      }
    }
  }
}
