private function ArrStr_FindIndex( variable & arrstrStrings[], variable strValue ) variable ;
private function Camera_AdjustPosition(  ) void ;
private function Camera_RequestPositionForAgarHeight( variable & fltPositionAgarHeightX_mm, variable & fltPositionAgarHeightY_mm ) void ;
private function MeasureAgarHeight( variable i_intChannelNumber, sequence i_seqLLDPositionOnPlate, variable i_strReferencePointsLabwareID, variable i_strPlateLabwareID, variable & o_fltAgarHeighRelativeToReferencePoints_mm, variable & o_fltAgarHeightRelativeToPlate_mm ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  EASYPICKII_STEPS::easyStep_DeInit(ML_STAR);
}

private function ArrStr_FindIndex( variable & arrstrStrings[], variable strValue ) variable {
  private variable intIndex;
  private variable intSize;
  intSize=arrstrStrings.GetSize();
  {
    for(intIndex = 0; intIndex < intSize;)
    {
      intIndex = intIndex + 1;
      if (arrstrStrings.ElementAt( intIndex -1) == strValue)
      {
        return (intIndex);
      }
    }
  }
  return (0);
}

private function MeasureAgarHeight( variable i_intChannelNumber, sequence i_seqLLDPositionOnPlate, variable i_strReferencePointsLabwareID, variable i_strPlateLabwareID, variable & o_fltAgarHeighRelativeToReferencePoints_mm, variable & o_fltAgarHeightRelativeToPlate_mm ) void {
  private variable intLLDMainErrorCode;
  private variable strLLDHeigh;
  private variable fltReferencePointZ_mm;
  private variable intStepReturnLLDPositions;
  private variable fltPlateZ_mm;
  private variable fltReferencePointY_mm;
  private variable fltPlateY_mm;
  private variable fltLLDHeight;
  private variable fltReferencePointX_mm;
  private variable fltPlateX_mm;
  private variable strStepReturnLiquidLevels;
  private variable strChannelPattern;
  private variable intTotalNumberOfChannels;
  o_fltAgarHeighRelativeToReferencePoints_mm = 0;
  o_fltAgarHeightRelativeToPlate_mm = 0;
  TipCount::Edit2(ML_STAR.MlStarStandardVolumeTips, _strTipCounterName, ML_STAR, fltTipsDialogTimeout_s);
  fltTipsDialogTimeout_s = 0;
  intTotalNumberOfChannels = EASYPICKII::HELPER::MLSTAR::GetNumberOfPipettingChannels(ML_STAR);
  strChannelPattern = EASYPICKII::HELPER::MLSTAR::ChannelPattern_SingleAdjust(i_intChannelNumber, intTotalNumberOfChannels);
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  {
    	variable arrRetValues[];
    	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
    	strStepReturnLiquidLevels = arrRetValues[2];
  }
  Trace("strStepReturnLiquidLevels: ", strStepReturnLiquidLevels);
  intStepReturnLLDPositions = StepReturn::GetNumberOfPositions(strStepReturnLiquidLevels);
  intLLDMainErrorCode = StepReturn::GetMainError(1, strStepReturnLiquidLevels);
  strLLDHeigh = StepReturn::GetStepData(1, strStepReturnLiquidLevels);
  fltLLDHeight = StrFVal(strLLDHeigh);
  intErrorCode = EASYPICKII::HELPER::LABWARE::GetPositionCoordinates_by_Labware(ML_STAR, i_strReferencePointsLabwareID, fltReferencePointX_mm, fltReferencePointY_mm, fltReferencePointZ_mm);
  if (intErrorCode != 0)
  {
    EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
    abort;
  }
  intErrorCode = EASYPICKII::HELPER::LABWARE::GetPositionCoordinates_by_Labware(ML_STAR, i_strPlateLabwareID, fltPlateX_mm, fltPlateY_mm, fltPlateZ_mm);
  if (intErrorCode != 0)
  {
    EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
    abort;
  }
  o_fltAgarHeightRelativeToPlate_mm = fltLLDHeight - fltPlateZ_mm;
  o_fltAgarHeighRelativeToReferencePoints_mm = fltLLDHeight - fltReferencePointZ_mm;
  Trace("o_fltAgarHeighRelativeToReferencePoints_mm: ", o_fltAgarHeighRelativeToReferencePoints_mm);
  Trace("o_fltAgarHeightRelativeToPlate_mm: ", o_fltAgarHeightRelativeToPlate_mm);
  TipCount::Write2(ML_STAR.MlStarStandardVolumeTips, _strTipCounterName, ML_STAR);
}

private function Camera_RequestPositionForAgarHeight( variable & fltPositionAgarHeightX_mm, variable & fltPositionAgarHeightY_mm ) void {
  private dialog customDialog_1;
  private variable loopCounter1;
  private variable fltIncrement_mm;
  private variable fltDummy1;
  private variable fltDummy2;
  private variable fltPositionZ_mm;
  private variable fltPositionY_mm;
  private variable fltPositionX_mm;
  private sequence seqCLLDPosition;
  private variable fltReferencePointY_mm;
  private variable fltReferencePointX_mm;
  private variable fltChannelOffsetY_mm;
  private variable fltChannelOffsetX_mm;
  private variable blnMainWindowVisible;
  private variable fltAgarHeightRelativeToReferencePoint_mm;
  private variable fltAgarHeightRelativeToPlate_mm;
  private variable strDrawingsColor;
  private variable arrintMoveIncrement_mm[];
  private variable intIndexMoveIncrement;
  private variable fltCameraPositionY_mm;
  private variable fltCameraPositionX_mm;
  private dialog dialogHandle_2;
  private variable intAgarHeightDialogResult;
  private variable intChannelNumberForMeasure;
  fltAgarHeightRelativeToReferencePoint_mm = 0;
  fltAgarHeightRelativeToPlate_mm = 0;
  intChannelNumberForMeasure = 1;
  intIndexMoveIncrement = 4;
  arrintMoveIncrement_mm.AddAsLast(0.1);
  arrintMoveIncrement_mm.AddAsLast(0.5);
  arrintMoveIncrement_mm.AddAsLast(1);
  arrintMoveIncrement_mm.AddAsLast(2.0);
  arrintMoveIncrement_mm.AddAsLast(10.0);
  arrintMoveIncrement_mm.AddAsLast(50.0);
  arrintMoveIncrement_mm.AddAsLast(100.0);
  intErrorCode = EASYPICKII::CAMERA::Open(Translate(""));
  if (intErrorCode != 0)
  {
    EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
    return;
  }
  EASYPICKII::GUI::IsVisible(blnMainWindowVisible);
  EASYPICKII::GUI::Hide();
  EASYPICKII::GUI::LIVEVIEW::Show(EASYPICKII::GUI::SHOW::MODE::_NORMAL);
  EASYPICKII::GUI::LIVEVIEW::Draw_ClearAll();
  strDrawingsColor = "red";
  fltPictureRatio = 1536 / (2048 * 1.0);
  fltPictureRatio = 1536 / (2048 * 1.0);
  flt_mmPerPct = 1.476 * 1;
  fltY_50pct = 50 * fltPictureRatio;
  fltY_25pct = 25 * fltPictureRatio;
  fltY_75pct = 75 * fltPictureRatio;
  fltY_100pct = 100 * fltPictureRatio;
  flt10mm_pct = 10 / (flt_mmPerPct * 1.0);
  {
    loopCounterLieal = 0;
    while (1 == 1)
    {
      loopCounterLieal = loopCounterLieal + 1;
      fltDistance_pct = loopCounterLieal * flt10mm_pct;
      fltX1_pct = 50 - fltDistance_pct;
      if (fltX1_pct < 0)
      {
        break;
      }
      fltX2_pct = fltX1_pct;
      fltLineLength_pct = flt10mm_pct / (2 * 1.0);
      fltY1_pct = fltY_50pct - fltLineLength_pct;
      fltY2_pct = fltY_50pct + fltLineLength_pct;
      EASYPICKII::GUI::LIVEVIEW::Draw_Line(Translate(""), fltX1_pct, fltY1_pct, fltX2_pct, fltY2_pct, strDrawingsColor, 1);
    }
  }
  {
    loopCounterLieal = 0;
    while (1 == 1)
    {
      loopCounterLieal = loopCounterLieal + 1;
      fltDistance_pct = loopCounterLieal * flt10mm_pct;
      fltX1_pct = 50 + fltDistance_pct;
      if (fltX1_pct > 100)
      {
        break;
      }
      fltX2_pct = fltX1_pct;
      fltLineLength_pct = flt10mm_pct / (2 * 1.0);
      fltY1_pct = fltY_50pct - fltLineLength_pct;
      fltY2_pct = fltY_50pct + fltLineLength_pct;
      EASYPICKII::GUI::LIVEVIEW::Draw_Line(Translate(""), fltX1_pct, fltY1_pct, fltX2_pct, fltY2_pct, strDrawingsColor, 1);
    }
  }
  {
    loopCounterLieal = 0;
    while (1 == 1)
    {
      loopCounterLieal = loopCounterLieal + 1;
      fltDistance_pct = loopCounterLieal * flt10mm_pct;
      fltY1_pct = fltY_50pct - fltDistance_pct;
      if (fltY1_pct < 0)
      {
        break;
      }
      fltY2_pct = fltY1_pct;
      fltLineLength_pct = flt10mm_pct / (2 * 1.0);
      fltX1_pct = 50 - fltLineLength_pct;
      fltX2_pct = 50 + fltLineLength_pct;
      EASYPICKII::GUI::LIVEVIEW::Draw_Line(Translate(""), fltX1_pct, fltY1_pct, fltX2_pct, fltY2_pct, strDrawingsColor, 1);
    }
  }
  {
    loopCounterLieal = 0;
    while (1 == 1)
    {
      loopCounterLieal = loopCounterLieal + 1;
      fltDistance_pct = loopCounterLieal * flt10mm_pct;
      fltY1_pct = fltY_50pct + fltDistance_pct;
      if (fltY1_pct > fltY_100pct)
      {
        break;
      }
      fltY2_pct = fltY1_pct;
      fltLineLength_pct = flt10mm_pct / (2 * 1.0);
      fltX1_pct = 50 - fltLineLength_pct;
      fltX2_pct = 50 + fltLineLength_pct;
      EASYPICKII::GUI::LIVEVIEW::Draw_Line(Translate(""), fltX1_pct, fltY1_pct, fltX2_pct, fltY2_pct, strDrawingsColor, 1);
    }
  }
  {
    for(loopCounterLieal = 0; loopCounterLieal < 9;)
    {
      loopCounterLieal = loopCounterLieal + 1;
      fltDistance_pct = loopCounterLieal / (flt_mmPerPct * 1.0);
      fltX1_pct = 50 - fltDistance_pct;
      fltX2_pct = fltX1_pct;
      fltLineLength_pct = 0.5 / (flt_mmPerPct * 1.0);
      if (loopCounterLieal == 5)
      {
        fltLineLength_pct = fltLineLength_pct * 2.5;
      }
      fltY1_pct = fltY_50pct - fltLineLength_pct;
      fltY2_pct = fltY_50pct + fltLineLength_pct;
      EASYPICKII::GUI::LIVEVIEW::Draw_Line(Translate(""), fltX1_pct, fltY1_pct, fltX2_pct, fltY2_pct, strDrawingsColor, 1);
    }
  }
  {
    for(loopCounterLieal = 0; loopCounterLieal < 9;)
    {
      loopCounterLieal = loopCounterLieal + 1;
      fltDistance_pct = loopCounterLieal / (flt_mmPerPct * 1.0);
      fltX1_pct = 50 + fltDistance_pct;
      fltX2_pct = fltX1_pct;
      fltLineLength_pct = 0.5 / (flt_mmPerPct * 1.0);
      if (loopCounterLieal == 5)
      {
        fltLineLength_pct = fltLineLength_pct * 2.5;
      }
      fltY1_pct = fltY_50pct - fltLineLength_pct;
      fltY2_pct = fltY_50pct + fltLineLength_pct;
      EASYPICKII::GUI::LIVEVIEW::Draw_Line(Translate(""), fltX1_pct, fltY1_pct, fltX2_pct, fltY2_pct, strDrawingsColor, 1);
    }
  }
  {
    for(loopCounterLieal = 0; loopCounterLieal < 9;)
    {
      loopCounterLieal = loopCounterLieal + 1;
      fltDistance_pct = loopCounterLieal / (flt_mmPerPct * 1.0);
      fltY1_pct = fltY_50pct - fltDistance_pct;
      fltY2_pct = fltY1_pct;
      fltLineLength_pct = 0.5 / (flt_mmPerPct * 1.0);
      if (loopCounterLieal == 5)
      {
        fltLineLength_pct = fltLineLength_pct * 2.5;
      }
      fltX1_pct = 50 - fltLineLength_pct;
      fltX2_pct = 50 + fltLineLength_pct;
      EASYPICKII::GUI::LIVEVIEW::Draw_Line(Translate(""), fltX1_pct, fltY1_pct, fltX2_pct, fltY2_pct, strDrawingsColor, 1);
    }
  }
  {
    for(loopCounterLieal = 0; loopCounterLieal < 9;)
    {
      loopCounterLieal = loopCounterLieal + 1;
      fltDistance_pct = loopCounterLieal / (flt_mmPerPct * 1.0);
      fltY1_pct = fltY_50pct + fltDistance_pct;
      fltY2_pct = fltY1_pct;
      fltLineLength_pct = 0.5 / (flt_mmPerPct * 1.0);
      if (loopCounterLieal == 5)
      {
        fltLineLength_pct = fltLineLength_pct * 2.5;
      }
      fltX1_pct = 50 - fltLineLength_pct;
      fltX2_pct = 50 + fltLineLength_pct;
      EASYPICKII::GUI::LIVEVIEW::Draw_Line(Translate(""), fltX1_pct, fltY1_pct, fltX2_pct, fltY2_pct, strDrawingsColor, 1);
    }
  }
  EASYPICKII::GUI::LIVEVIEW::Draw_Line(Translate(""), 0, fltY_50pct, 100, fltY_50pct, strDrawingsColor, 1);
  EASYPICKII::GUI::LIVEVIEW::Draw_Line(Translate(""), 50, 0, 50, fltY_100pct, strDrawingsColor, 1);
  {
    loopCounter1 = 0;
    while (1 == 1)
    {
      loopCounter1 = loopCounter1 + 1;
      fltCameraPositionX_mm = fltPositionAgarHeightX_mm + _fltCameraAdjustmentX_mm;
      fltCameraPositionY_mm = fltPositionAgarHeightY_mm + _fltCameraAdjustmentY_mm;
      onerror goto errLabel_3 ;
      err.Clear();
      intErrorCode = EASYPICKII_STEPS::easyStep_Camera_Place_to_Labware(ML_STAR, _strReferencePointTopLeftLabwareID, fltCameraPositionX_mm, fltCameraPositionY_mm, 0.0);
      errLabel_3 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        dialogHandle_2.SetOutput(Translate("Position out of range!"));
        dialogHandle_2.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }   /* end if from skip handler if no error */
      customDialog_1.InitCustomDialog("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");
      customDialog_1.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", arrintMoveIncrement_mm );
      customDialog_1.SetCustomDialogProperty( "numericXLeft.Value", fltPositionAgarHeightX_mm );
      customDialog_1.SetCustomDialogProperty( "numericYTop.Value", fltPositionAgarHeightY_mm );
      customDialog_1.SetCustomDialogProperty( "numeric1.Value", fltAgarHeightRelativeToPlate_mm );
      customDialog_1.SetCustomDialogProperty( "numeric2.Value", fltAgarHeightRelativeToReferencePoint_mm );
      customDialog_1.SetCustomDialogProperty( "comboBox1.SelectedIndex", intIndexMoveIncrement );
      customDialog_1.ShowCustomDialog();
      intAgarHeightDialogResult = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
      fltPositionAgarHeightX_mm = customDialog_1.GetCustomDialogProperty( "numericXLeft.Value" );
      fltPositionAgarHeightY_mm = customDialog_1.GetCustomDialogProperty( "numericYTop.Value" );
      intIndexMoveIncrement = customDialog_1.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
      fltIncrement_mm=arrintMoveIncrement_mm.GetAt(intIndexMoveIncrement-1);
      if (intAgarHeightDialogResult == 2)
      {
        EASYPICKII::GUI::LIVEVIEW::Draw_ClearAll();
        if (blnMainWindowVisible != 0)
        {
          EASYPICKII::GUI::Show(EASYPICKII::GUI::SHOW::MODE::_NORMAL);
        }
        return;
      }
      if (intAgarHeightDialogResult == 11)
      {
        fltPositionAgarHeightY_mm = fltPositionAgarHeightY_mm + fltIncrement_mm;
      }
      if (intAgarHeightDialogResult == 12)
      {
        fltPositionAgarHeightY_mm = fltPositionAgarHeightY_mm - fltIncrement_mm;
      }
      if (intAgarHeightDialogResult == 13)
      {
        fltPositionAgarHeightX_mm = fltPositionAgarHeightX_mm - fltIncrement_mm;
      }
      if (intAgarHeightDialogResult == 14)
      {
        fltPositionAgarHeightX_mm = fltPositionAgarHeightX_mm + fltIncrement_mm;
      }
      if (intAgarHeightDialogResult == 20)
      {
        EASYPICKII::HELPER::LABWARE::GetPositionCoordinates_Center_by_Labware(ML_STAR, strPlateLabwareID, fltDummy1, fltDummy2, fltPositionZ_mm);
        EASYPICKII::HELPER::LABWARE::GetPositionCoordinates_Center_by_Labware(ML_STAR, _strReferencePointTopLeftLabwareID, fltReferencePointX_mm, fltReferencePointY_mm, fltDummy1);
        fltPositionX_mm = fltPositionAgarHeightX_mm + fltReferencePointX_mm;
        fltPositionY_mm = fltPositionAgarHeightY_mm + fltReferencePointY_mm;
        EASYPICKII::SETTINGS::Instrument_GetChannelOffset(intChannelNumberForMeasure, fltChannelOffsetX_mm, fltChannelOffsetY_mm);
        fltPositionX_mm = fltPositionX_mm - fltChannelOffsetX_mm;
        MECC::TraceComment(Translate("Offset in light table coordinate system. \nPosition in ML_STAR coordinate sytem:  Y-Axis is upside down: Y-Value is added."));
        fltPositionY_mm = fltPositionY_mm + fltChannelOffsetY_mm;
        EASYPICKII::HELPER::LABWARE::SpotContainerPlace(ML_STAR, "ml_star\\EasyPickII\\ColonySpot\\colony_spot.rck", fltPositionX_mm, fltPositionY_mm, fltPositionZ_mm, 1, seqCLLDPosition);
        MeasureAgarHeight(intChannelNumberForMeasure, seqCLLDPosition, _strReferencePointTopLeftLabwareID, strPlateLabwareID, fltAgarHeightRelativeToReferencePoint_mm, fltAgarHeightRelativeToPlate_mm);
        EASYPICKII::HELPER::LABWARE::SpotContainerRemove(ML_STAR, 1);
      }
      if (intAgarHeightDialogResult == 21)
      {
        Camera_AdjustPosition();
      }
    }
  }
}

private function Camera_AdjustPosition(  ) void {
  private dialog customDialog_4;
  private variable fltRadius_pct;
  private variable intAdjustDialogResult;
  private variable fltIncrement_mm;
  private variable fltTopLeftX_pct;
  private variable fltTopLeftY_pct;
  private variable loopCounter1;
  private variable blnMainWindowVisible;
  private variable fltDiameter_pct;
  private variable arrstrLabwareIDs[];
  private variable fltCurrentCameraAdjustmentX_mm;
  private variable strCurrentLabwareID;
  private variable fltCurrentCameraPositionY_mm;
  private variable fltCurrentCameraPositionX_mm;
  private variable fltLabwareZ_mm;
  private variable fltLabwareY_mm;
  private variable fltLabwareX_mm;
  private variable fltCurrentCameraAdjustmentY_mm;
  private variable fltRadius_mm;
  private variable strDrawingsColor;
  private dialog dialogHandle2;
  private variable intIndexMoveIncrement;
  private variable arrintMoveIncrement_mm[];
  EASYPICKII::HELPER::TRACE::FmtTrace2Text(Translate(""), EASYPICKII::_TRACE_LEVEL_FULL, "Begin CameraPosition_Adjust", "");
  EASYPICKII::HELPER::TRACE::Trace2Text(EASYPICKII::_TRACE_LEVEL_FULL, "Begin CameraPosition_Adjust", "");
  fltCurrentCameraAdjustmentX_mm = _fltCameraAdjustmentX_mm;
  fltCurrentCameraAdjustmentY_mm = _fltCameraAdjustmentY_mm;
  arrstrLabwareIDs.SetSize(0);
  arrstrLabwareIDs.AddAsLast("easypickii_adjust_xl_small_0001");
  arrstrLabwareIDs.AddAsLast("easypickii_adjust_xl_small_0002");
  arrstrLabwareIDs.AddAsLast("easypickii_adjust_xl_small_0003");
  arrstrLabwareIDs.AddAsLast("easypickii_adjust_xl_small_0004");
  arrstrLabwareIDs.AddAsLast("easypickii_adjust_xl_big_0001");
  strCurrentLabwareID = "easypickii_adjust_xl_small_0001";
  intIndexMoveIncrement = 4;
  arrintMoveIncrement_mm.AddAsLast(0.1);
  arrintMoveIncrement_mm.AddAsLast(0.5);
  arrintMoveIncrement_mm.AddAsLast(1);
  arrintMoveIncrement_mm.AddAsLast(2.0);
  arrintMoveIncrement_mm.AddAsLast(10.0);
  arrintMoveIncrement_mm.AddAsLast(50.0);
  arrintMoveIncrement_mm.AddAsLast(100.0);
  intErrorCode = EASYPICKII::CAMERA::Open(Translate(""));
  if (intErrorCode != 0)
  {
    EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
    return;
  }
  EASYPICKII::GUI::IsVisible(blnMainWindowVisible);
  EASYPICKII::GUI::Hide();
  EASYPICKII::GUI::LIVEVIEW::Show(EASYPICKII::GUI::SHOW::MODE::_NORMAL);
  strDrawingsColor = "red";
  fltPictureRatio = 1536 / (2048 * 1.0);
  flt_mmPerPct = 1.476 * 1;
  fltY_25pct = 25 * fltPictureRatio;
  fltY_50pct = 50 * fltPictureRatio;
  fltY_75pct = 75 * fltPictureRatio;
  fltY_100pct = 100 * fltPictureRatio;
  flt10mm_pct = 10 / (flt_mmPerPct * 1.0);
  fltRadius_mm = 1.5;
  fltRadius_pct = fltRadius_mm / (flt_mmPerPct * 1.0);
  fltDiameter_pct = fltRadius_pct * 2;
  fltTopLeftX_pct = 50 - fltRadius_pct;
  fltTopLeftY_pct = fltY_50pct - fltRadius_pct;
  EASYPICKII::GUI::LIVEVIEW::Draw_Ellipse("Circle", fltTopLeftX_pct, fltTopLeftY_pct, fltDiameter_pct, fltDiameter_pct, 0, strDrawingsColor, 1, "margin");
  {
    loopCounter1 = 0;
    while (1 == 1)
    {
      loopCounter1 = loopCounter1 + 1;
      intErrorCode = EASYPICKII::HELPER::LABWARE::GetPositionCoordinates_by_Labware(ML_STAR, strCurrentLabwareID, fltLabwareX_mm, fltLabwareY_mm, fltLabwareZ_mm);
      fltCurrentCameraPositionX_mm = 0 + fltCurrentCameraAdjustmentX_mm;
      fltCurrentCameraPositionY_mm = 0 + fltCurrentCameraAdjustmentY_mm;
      onerror goto errLabel_5 ;
      err.Clear();
      intErrorCode = EASYPICKII_STEPS::easyStep_Camera_Place_to_Labware(ML_STAR, strCurrentLabwareID, fltCurrentCameraPositionX_mm, fltCurrentCameraPositionY_mm, 0.0);
      errLabel_5 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        dialogHandle2.SetOutput(Translate("Position out of range!"));
        dialogHandle2.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }   /* end if from skip handler if no error */
      customDialog_4.InitCustomDialog("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");
      customDialog_4.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", arrstrLabwareIDs );
      customDialog_4.SetCustomDialogArrayProperty( "comboBox2.ItemsSource", arrintMoveIncrement_mm );
      customDialog_4.SetCustomDialogProperty( "numericYBottom.Value", fltCurrentCameraAdjustmentX_mm );
      customDialog_4.SetCustomDialogProperty( "numericZFromTop.Value", fltCurrentCameraAdjustmentY_mm );
      customDialog_4.SetCustomDialogProperty( "comboBox1.Text", strCurrentLabwareID );
      customDialog_4.SetCustomDialogProperty( "comboBox2.SelectedIndex", intIndexMoveIncrement );
      customDialog_4.ShowCustomDialog();
      intAdjustDialogResult = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
      fltCurrentCameraAdjustmentX_mm = customDialog_4.GetCustomDialogProperty( "numericYBottom.Value" );
      fltCurrentCameraAdjustmentY_mm = customDialog_4.GetCustomDialogProperty( "numericZFromTop.Value" );
      strCurrentLabwareID = customDialog_4.GetCustomDialogProperty( "comboBox1.Text" );
      intIndexMoveIncrement = customDialog_4.GetCustomDialogProperty( "comboBox2.SelectedIndex" );
      if (intAdjustDialogResult == 31)
      {
      }
      if (intAdjustDialogResult == 1)
      {
        _fltCameraAdjustmentX_mm = fltCurrentCameraAdjustmentX_mm;
        _fltCameraAdjustmentY_mm = fltCurrentCameraAdjustmentY_mm;
        EASYPICKII::GUI::LIVEVIEW::Draw_Clear("Circle");
        if (blnMainWindowVisible != 0)
        {
          EASYPICKII::GUI::Show(EASYPICKII::GUI::SHOW::MODE::_NORMAL);
        }
        EASYPICKII::HELPER::TRACE::Trace2Text(EASYPICKII::_TRACE_LEVEL_FULL, "End CameraPosition_Adjust", "");
        return;
      }
      if (intAdjustDialogResult == 2)
      {
        EASYPICKII::GUI::LIVEVIEW::Draw_Clear("Circle");
        if (blnMainWindowVisible != 0)
        {
          EASYPICKII::GUI::Show(EASYPICKII::GUI::SHOW::MODE::_NORMAL);
        }
        EASYPICKII::HELPER::TRACE::Trace2Text(EASYPICKII::_TRACE_LEVEL_FULL, "End CameraPosition_Adjust", "");
        return;
      }
      fltIncrement_mm=arrintMoveIncrement_mm.GetAt(intIndexMoveIncrement-1);
      if (intAdjustDialogResult == 11)
      {
        fltCurrentCameraAdjustmentY_mm = fltCurrentCameraAdjustmentY_mm + fltIncrement_mm;
      }
      if (intAdjustDialogResult == 12)
      {
        fltCurrentCameraAdjustmentY_mm = fltCurrentCameraAdjustmentY_mm - fltIncrement_mm;
      }
      if (intAdjustDialogResult == 13)
      {
        fltCurrentCameraAdjustmentX_mm = fltCurrentCameraAdjustmentX_mm - fltIncrement_mm;
      }
      if (intAdjustDialogResult == 14)
      {
        fltCurrentCameraAdjustmentX_mm = fltCurrentCameraAdjustmentX_mm + fltIncrement_mm;
      }
    }
  }
}
