 namespace _Method { #include "easyPickIILibrary\\easyPickII_Steps.hs_" }
 namespace _Method { #include "easyPickIILibrary\\easyPickII_Library.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "easyPickIILibrary\\easyPickII_Helper.hsl" }
 namespace _Method { #include "HSLMlStarStepReturnLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
#include "MLSTARLet_LightTableXL.res"
 namespace _Method { #include "easyPickIILibrary\\easyPickII_FastPick.hsl" }
 namespace _Method { #include "HSLFilLib.hsl" }
variable loopCounterColoniesPickingCycle;
variable intLoopWell;
global device ML_STAR ("MLSTARLet_LightTableXL.lay", "ML_STAR", hslTrue);
variable intErrorCode;
variable blnSimulationMode;
variable intComboBoxIndexStitcherSettingsName;
variable intComboBoxIndexColonySettingsName;
variable intComboBoxIndexCameraSettingsName;
variable arrstrColonySettingsNames[];
variable arrstrStitcherSettingsNames[];
variable arrstrCameraSettingsNames[];
variable intDialogResult;
variable blnShowProcessingColonies;
variable intColonyIDsIndex;
variable intColonyID;
variable intColonyIDsArraySize;
variable blnShowCameraLiveView;
variable fltAspirateAtFixHeight_mm;
variable blnFastPick;
variable fltAddToAgarHeight_mm;
variable intRackErrorCode;
variable strRackPictureFile;
variable intRackContainersX;
variable strRackDescription;
variable intImageStitcherID;
variable intRackContainersY;
variable strRackBarcode;
variable blnMeasureAgarHeight;
variable intContainerCount;
variable intRackID;
variable arrintColonyIDs[];
variable fltLightIntensity_pct;
variable intLightSource;
variable blnShowConfigurationDialog;
variable strAspirateStepReturn;
variable strChannelPatternUsable;
variable strChannelPatternUsed;
variable strColonySettingsName;
variable strCameraSettingsName;
variable strPlateDescription;
variable strImageStitcherSettingsName;
variable strPlateBarcode;
variable fltEasyPickMainWindowTimeout_s;
variable fltTipCountingDialogTimeout_s;
variable intNumberOfChannels;
variable intNumberOfColoniesToPick;
variable intTotalNumberOfColonies;
variable arrintMaxNumberOfColoniesToPick[];
variable arrintContainerNumbers[];
sequence seqColonyPositions;
variable intMaxNumberOfColoniesToPickFromContainer;
variable intMaxNumberOfChannelsToUse;
variable blnDryRun;
variable intTipsSequenceCounting;
variable intComboBoxIndexLightSource;
variable arrstrLightSourceNames[];
variable fltPickHeightOverAgar;
variable fltPickHeightOverPlate;
variable Predefined_OffsetY2;
variable Predefined_OffsetXRight;
variable _fltCameraPositionXRight_mm;
variable _fltCameraPositionZFromTop_mm;
variable _blnCameraAdjustmentExists;
variable _strImageStitcherCameraPositions;
variable _fltCameraPositionXLeft_mm;
variable Predefined_OffsetZFromTop;
variable _fltCameraAdjustmentY_mm;
variable _fltCameraPositionY2_mm;
variable _fltCameraAdjustmentX_mm;
variable Predefined_OffsetXLeft;
variable _fltCameraPositionY1_mm;
variable _strCameraAdjustmentFilePath;
variable Predefined_OffsetY0;
variable _fltPositionAgarHeightY_mm;
variable fltTipsDialogTimeout_s;
variable _fltCameraPositionY0_mm;
variable Predefined_OffsetY1;
variable _fltPositionAgarHeightX_mm;
file _fileCameraAdjustment;
file _fileCameraPositions;
dialog customDialog_1;
dialog customDialog_2;
variable _strSettingsFilePath;
file _fileSettings;
variable fltAgarHeightRelativeToReferencePoints_mm;
variable fltAgarHeightRelativeToPlate_mm;
variable _strReferencePointTopLeftLabwareID;
variable _strTipCounterName;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    EASYPICKII_STEPS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    intErrorCode = EASYPICKII_STEPS::easyStep_Init(ML_STAR, EASYPICKII::_TRACE_LEVEL_FULL, EASYPICKII::_HSLTRUE);
    if (intErrorCode != 0)
    {
      EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
      abort;
    }
    EASYPICKII::INIT::GetSimulationMode(blnSimulationMode);
    _fltCameraAdjustmentX_mm = 1.2;
    _fltCameraAdjustmentY_mm = -4.4;
    _fltPositionAgarHeightX_mm = 0;
    _fltPositionAgarHeightY_mm = 0;
    fltTipsDialogTimeout_s = 9999;
    _blnCameraAdjustmentExists = 0;
    _strCameraAdjustmentFilePath = FilGetMethodsPath();
    _strCameraAdjustmentFilePath = _strCameraAdjustmentFilePath + "\\EasyPickIIMethods\\LightTableXL\\LightTableXL_CameraAdjustment.csv";
    onerror goto errLabel_3 ;
    err.Clear();
    _fileCameraAdjustment.AddField("CameraAdjustX", _fltCameraAdjustmentX_mm, hslFloat);
    _fileCameraAdjustment.AddField("CameraAdjustY", _fltCameraAdjustmentY_mm, hslFloat);
    _fileCameraAdjustment.SetDelimiter(hslCSVDelimited);
    if( 0 == _fileCameraAdjustment.Open(_strCameraAdjustmentFilePath, hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strCameraAdjustmentFilePath, "HxMetEdCompCmd");
    }
    if( 0 == _fileCameraAdjustment.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    _blnCameraAdjustmentExists = EASYPICKII::_HSLTRUE;
    errLabel_3 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
    if( 0 != _fileCameraAdjustment.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    _fileCameraAdjustment.RemoveFields();
    Predefined_OffsetXLeft = 65;
    Predefined_OffsetXRight = 185;
    Predefined_OffsetY0 = -50;
    Predefined_OffsetY1 = -130;
    Predefined_OffsetY2 = -210;
    Predefined_OffsetZFromTop = 0;
    _fltCameraPositionXLeft_mm = Predefined_OffsetXLeft;
    _fltCameraPositionXRight_mm = Predefined_OffsetXRight;
    _fltCameraPositionY0_mm = Predefined_OffsetY0;
    _fltCameraPositionY1_mm = Predefined_OffsetY1;
    _fltCameraPositionY2_mm = Predefined_OffsetY2;
    _fltCameraPositionZFromTop_mm = Predefined_OffsetZFromTop;
    _strImageStitcherCameraPositions = FilGetMethodsPath();
    _strImageStitcherCameraPositions = _strImageStitcherCameraPositions + "\\EasyPickIIMethods\\LightTableXL\\LightTableXL_ImageStitcherCameraPositions.csv";
    onerror goto errLabel_4 ;
    err.Clear();
    _fileCameraPositions.AddField("X0", _fltCameraPositionXLeft_mm, hslFloat);
    _fileCameraPositions.AddField("X1", _fltCameraPositionXRight_mm, hslFloat);
    _fileCameraPositions.AddField("Y0", _fltCameraPositionY0_mm, hslFloat);
    _fileCameraPositions.AddField("Y1", _fltCameraPositionY1_mm, hslFloat);
    _fileCameraPositions.AddField("Y2", _fltCameraPositionY2_mm, hslFloat);
    _fileCameraPositions.AddField("Z", _fltCameraPositionZFromTop_mm, hslFloat);
    _fileCameraPositions.SetDelimiter(hslCSVDelimited);
    if( 0 == _fileCameraPositions.Open(_strImageStitcherCameraPositions, hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strImageStitcherCameraPositions, "HxMetEdCompCmd");
    }
    if( 0 == _fileCameraPositions.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    errLabel_4 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
    if( 0 != _fileCameraPositions.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    _fileCameraPositions.RemoveFields();
    blnShowConfigurationDialog = EASYPICKII::_HSLTRUE;
    blnDryRun = EASYPICKII::_HSLTRUE;
    blnMeasureAgarHeight = EASYPICKII::_HSLTRUE;
    blnFastPick = EASYPICKII::_HSLFALSE;
    blnShowProcessingColonies = EASYPICKII::_HSLTRUE;
    fltAddToAgarHeight_mm = 2.8;
    fltPickHeightOverAgar = 3;
    fltPickHeightOverPlate = 10;
    intLightSource = EASYPICKII::EASYPICKII_HELPER::LIGHTSOURCE::_MLSTAR_DIV3_PWM3;
    fltLightIntensity_pct = 50;
    blnShowCameraLiveView = EASYPICKII::_HSLTRUE;
    if (blnSimulationMode == 0)
    {
      strCameraSettingsName = "default";
      strColonySettingsName = "LightTableXL-Template";
      strImageStitcherSettingsName = "LightTableXL 1.1";
      if (blnShowConfigurationDialog != 0)
      {
        _strSettingsFilePath = FilGetMethodsPath();
        _strSettingsFilePath = _strSettingsFilePath + "\\EasyPickIIMethods\\LightTableXL\\LightTableXL_SearchColoniesDemo.csv";
        onerror goto errLabel_5 ;
        err.Clear();
        _fileSettings.AddField("CameraSettings", strCameraSettingsName, hslString, 255);
        _fileSettings.AddField("ImageStitcherSettings", strImageStitcherSettingsName, hslString, 255);
        _fileSettings.AddField("ColonySettings", strColonySettingsName, hslString, 255);
        _fileSettings.AddField("blnMeasureAgarHeight", blnMeasureAgarHeight, hslInteger);
        _fileSettings.AddField("blnFastPick", blnFastPick, hslInteger);
        _fileSettings.SetDelimiter(hslCSVDelimited);
        if( 0 == _fileSettings.Open(_strSettingsFilePath, hslRead) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strSettingsFilePath, "HxMetEdCompCmd");
        }
        if( 0 == _fileSettings.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        errLabel_5 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
        }   /* end if from skip handler if no error */
        if( 0 != _fileSettings.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        _fileSettings.RemoveFields();
      }
    }
    else
    {
      blnMeasureAgarHeight = EASYPICKII::_HSLFALSE;
      blnShowCameraLiveView = EASYPICKII::_HSLFALSE;
      strCameraSettingsName = "default";
      strColonySettingsName = "Demo_QTray-Plate";
      strImageStitcherSettingsName = "Demo_QTray-Plate";
    }
    _strTipCounterName = "StandardVolumeTips";
    strPlateBarcode = Translate("Demo Plate");
    strPlateDescription = Translate("Demo Plate Description");
    intMaxNumberOfColoniesToPickFromContainer = 16;
    intNumberOfChannels = EASYPICKII::HELPER::MLSTAR::GetNumberOfPipettingChannels(ML_STAR);
    intMaxNumberOfChannelsToUse = intNumberOfChannels;
    fltEasyPickMainWindowTimeout_s = 3;
    fltTipCountingDialogTimeout_s = 60;
    _strReferencePointTopLeftLabwareID = "easypickii_adjust_xl_small_0001";
    if (blnShowConfigurationDialog == 0)
    {
      fltTipCountingDialogTimeout_s = 1;
    }
    else
    {
      if (blnSimulationMode == 0)
      {
        arrstrLightSourceNames.SetSize(0);
        arrstrLightSourceNames.AddAsLast(Translate("No Light"));
        arrstrLightSourceNames.AddAsLast(Translate("1st power supply on DIV 2 plug"));
        arrstrLightSourceNames.AddAsLast(Translate("2nd power supply on DIV 2 plug"));
        arrstrLightSourceNames.AddAsLast(Translate("1st power supply on DIV 3 plug"));
        arrstrLightSourceNames.AddAsLast(Translate("2nd power supply on DIV 3 plug"));
        arrstrLightSourceNames.AddAsLast(Translate("Light on camera channel"));
        intErrorCode = EASYPICKII::SETTINGS::GetCameraSettingsNamesList(arrstrCameraSettingsNames);
        if (intErrorCode != 0)
        {
          EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
          abort;
        }
        intErrorCode = EASYPICKII::SETTINGS::GetColonySettingsNamesList(arrstrColonySettingsNames);
        if (intErrorCode != 0)
        {
          EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
          abort;
        }
        intErrorCode = EASYPICKII::SETTINGS::GetImageStitcherSettingsNamesList(arrstrStitcherSettingsNames);
        if (intErrorCode != 0)
        {
          EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
          abort;
        }
        intComboBoxIndexCameraSettingsName = ArrStr_FindIndex(arrstrCameraSettingsNames, strCameraSettingsName);
        intComboBoxIndexColonySettingsName = ArrStr_FindIndex(arrstrColonySettingsNames, strColonySettingsName);
        intComboBoxIndexStitcherSettingsName = ArrStr_FindIndex(arrstrStitcherSettingsNames, strImageStitcherSettingsName);
        intComboBoxIndexLightSource = intLightSource + 1;
        customDialog_2.InitCustomDialog("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");
        customDialog_2.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", arrstrCameraSettingsNames );
        customDialog_2.SetCustomDialogArrayProperty( "comboBox2.ItemsSource", arrstrStitcherSettingsNames );
        customDialog_2.SetCustomDialogArrayProperty( "comboBox3.ItemsSource", arrstrColonySettingsNames );
        customDialog_2.SetCustomDialogArrayProperty( "comboBox4.ItemsSource", arrstrLightSourceNames );
        customDialog_2.SetCustomDialogProperty( "checkBox1.IsChecked", blnShowCameraLiveView );
        customDialog_2.SetCustomDialogProperty( "comboBox1.Text", strCameraSettingsName );
        customDialog_2.SetCustomDialogProperty( "comboBox1.SelectedIndex", intComboBoxIndexCameraSettingsName );
        customDialog_2.SetCustomDialogProperty( "comboBox2.Text", strImageStitcherSettingsName );
        customDialog_2.SetCustomDialogProperty( "comboBox2.SelectedIndex", intComboBoxIndexStitcherSettingsName );
        customDialog_2.SetCustomDialogProperty( "comboBox3.SelectedIndex", intComboBoxIndexColonySettingsName );
        customDialog_2.SetCustomDialogProperty( "comboBox3.Text", strColonySettingsName );
        customDialog_2.SetCustomDialogProperty( "checkBox2.IsChecked", blnMeasureAgarHeight );
        customDialog_2.SetCustomDialogProperty( "checkBox3.IsChecked", blnDryRun );
        customDialog_2.SetCustomDialogProperty( "numeric1.Value", fltLightIntensity_pct );
        customDialog_2.SetCustomDialogProperty( "comboBox4.SelectedIndex", intComboBoxIndexLightSource );
        customDialog_2.SetCustomDialogProperty( "numericAgarHeightCorrection.Value", fltAddToAgarHeight_mm );
        customDialog_2.SetCustomDialogProperty( "numericPickHeightOverAgar.Value", fltPickHeightOverAgar );
        customDialog_2.SetCustomDialogProperty( "numericPickHeightOverPlate.Value", fltPickHeightOverPlate );
        customDialog_2.ShowCustomDialog();
        intDialogResult = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
        blnShowCameraLiveView = customDialog_2.GetCustomDialogProperty( "checkBox1.IsChecked" );
        strCameraSettingsName = customDialog_2.GetCustomDialogProperty( "comboBox1.Text" );
        intComboBoxIndexCameraSettingsName = customDialog_2.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
        strImageStitcherSettingsName = customDialog_2.GetCustomDialogProperty( "comboBox2.Text" );
        intComboBoxIndexStitcherSettingsName = customDialog_2.GetCustomDialogProperty( "comboBox2.SelectedIndex" );
        intComboBoxIndexColonySettingsName = customDialog_2.GetCustomDialogProperty( "comboBox3.SelectedIndex" );
        strColonySettingsName = customDialog_2.GetCustomDialogProperty( "comboBox3.Text" );
        blnMeasureAgarHeight = customDialog_2.GetCustomDialogProperty( "checkBox2.IsChecked" );
        blnDryRun = customDialog_2.GetCustomDialogProperty( "checkBox3.IsChecked" );
        fltLightIntensity_pct = customDialog_2.GetCustomDialogProperty( "numeric1.Value" );
        intComboBoxIndexLightSource = customDialog_2.GetCustomDialogProperty( "comboBox4.SelectedIndex" );
        fltAddToAgarHeight_mm = customDialog_2.GetCustomDialogProperty( "numericAgarHeightCorrection.Value" );
        fltPickHeightOverAgar = customDialog_2.GetCustomDialogProperty( "numericPickHeightOverAgar.Value" );
        fltPickHeightOverPlate = customDialog_2.GetCustomDialogProperty( "numericPickHeightOverPlate.Value" );
        if (intDialogResult == 2)
        {
          abort;
        }
        intLightSource = intComboBoxIndexLightSource - 1;
      }
      customDialog_1.InitCustomDialog("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");
      customDialog_1.SetCustomDialogProperty( "textBox1.Text", strPlateBarcode );
      customDialog_1.SetCustomDialogProperty( "textBox2.Text", strPlateDescription );
      customDialog_1.SetCustomDialogProperty( "numeric1.Value", intMaxNumberOfColoniesToPickFromContainer );
      customDialog_1.SetCustomDialogProperty( "numeric2.Maximum", intNumberOfChannels );
      customDialog_1.SetCustomDialogProperty( "numeric2.Value", intMaxNumberOfChannelsToUse );
      customDialog_1.ShowCustomDialog();
      strPlateBarcode = customDialog_1.GetCustomDialogProperty( "textBox1.Text" );
      strPlateDescription = customDialog_1.GetCustomDialogProperty( "textBox2.Text" );
      intMaxNumberOfColoniesToPickFromContainer = customDialog_1.GetCustomDialogProperty( "numeric1.Value" );
      intMaxNumberOfChannelsToUse = customDialog_1.GetCustomDialogProperty( "numeric2.Value" );
    }
    TipCount::Edit2(ML_STAR.MlStarStandardVolumeTips, _strTipCounterName, ML_STAR, fltTipCountingDialogTimeout_s);
    intErrorCode = EASYPICKII_STEPS::easyStep_Light_On(ML_STAR, intLightSource, fltLightIntensity_pct);
    if (blnMeasureAgarHeight != 0)
    {
      Camera_RequestPositionForAgarHeight(strCameraSettingsName, _strReferencePointTopLeftLabwareID, _fltPositionAgarHeightX_mm, _fltPositionAgarHeightY_mm);
      MeasureAgarHeightWithPosition(_fltPositionAgarHeightX_mm, _fltPositionAgarHeightY_mm, Translate("QTray_0001"), _strReferencePointTopLeftLabwareID, fltAgarHeightRelativeToReferencePoints_mm, fltAgarHeightRelativeToPlate_mm);
      fltAgarHeightRelativeToReferencePoints_mm = fltAgarHeightRelativeToReferencePoints_mm + fltAddToAgarHeight_mm;
    }
    if (blnShowCameraLiveView != 0)
    {
      intErrorCode = EASYPICKII::GUI::LIVEVIEW::Show(EASYPICKII::GUI::SHOW::MODE::_NORMAL);
      if (intErrorCode != 0)
      {
        EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
        abort;
      }
      intErrorCode = EASYPICKII::CAMERA::Open(strCameraSettingsName);
      if (intErrorCode != 0)
      {
        EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
        abort;
      }
    }
    if (intErrorCode != 0)
    {
      EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
      abort;
    }
    if (blnSimulationMode == 0)
    {
      intErrorCode = EASYPICKII_STEPS::easyStep_ImageStitcher_TakePictures(ML_STAR, _strReferencePointTopLeftLabwareID, strCameraSettingsName, _fltCameraPositionXLeft_mm, _fltCameraPositionXRight_mm, _fltCameraPositionY0_mm, _fltCameraPositionY1_mm, _fltCameraPositionY2_mm);
      if (intErrorCode != 0)
      {
        EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
        abort;
      }
    }
    else
    {
      intErrorCode = EASYPICKII::CAMERA::LoadPicture("settings\\ImageStitcherDemo\\QTray-Plate-01.png");
      if (intErrorCode != 0)
      {
        EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
        abort;
      }
      intErrorCode = EASYPICKII::IMAGE_STITCHER::AssignPicturePosition(0);
      if (intErrorCode != 0)
      {
        EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
        abort;
      }
      intErrorCode = EASYPICKII::CAMERA::LoadPicture("settings\\ImageStitcherDemo\\QTray-Plate-02.png");
      if (intErrorCode != 0)
      {
        EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
        abort;
      }
      intErrorCode = EASYPICKII::IMAGE_STITCHER::AssignPicturePosition(1);
      if (intErrorCode != 0)
      {
        EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
        abort;
      }
      intErrorCode = EASYPICKII::CAMERA::LoadPicture("settings\\ImageStitcherDemo\\QTray-Plate-03.png");
      if (intErrorCode != 0)
      {
        EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
        abort;
      }
      intErrorCode = EASYPICKII::IMAGE_STITCHER::AssignPicturePosition(2);
      if (intErrorCode != 0)
      {
        EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
        abort;
      }
      intErrorCode = EASYPICKII::CAMERA::LoadPicture("settings\\ImageStitcherDemo\\QTray-Plate-04.png");
      if (intErrorCode != 0)
      {
        EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
        abort;
      }
      intErrorCode = EASYPICKII::IMAGE_STITCHER::AssignPicturePosition(3);
      if (intErrorCode != 0)
      {
        EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
        abort;
      }
      intErrorCode = EASYPICKII::CAMERA::LoadPicture("settings\\ImageStitcherDemo\\QTray-Plate-05.png");
      if (intErrorCode != 0)
      {
        EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
        abort;
      }
      intErrorCode = EASYPICKII::IMAGE_STITCHER::AssignPicturePosition(4);
      if (intErrorCode != 0)
      {
        EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
        abort;
      }
      intErrorCode = EASYPICKII::CAMERA::LoadPicture("settings\\ImageStitcherDemo\\QTray-Plate-06.png");
      if (intErrorCode != 0)
      {
        EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
        abort;
      }
      intErrorCode = EASYPICKII::IMAGE_STITCHER::AssignPicturePosition(5);
      if (intErrorCode != 0)
      {
        EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
        abort;
      }
    }
    if (blnShowCameraLiveView != 0)
    {
      intErrorCode = EASYPICKII::GUI::LIVEVIEW::Hide();
      if (intErrorCode != 0)
      {
        EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
        abort;
      }
    }
    intErrorCode = EASYPICKII_STEPS::easyStep_Light_Off(ML_STAR, intLightSource);
    if (intErrorCode != 0)
    {
      EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
      abort;
    }
    if(0){
      intErrorCode = EASYPICKII::GUI::Show(EASYPICKII::GUI::SHOW::MODE::_NORMAL);
    }
    if (intErrorCode != 0)
    {
      EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
      abort;
    }
    if (blnMeasureAgarHeight == 0)
    {
      intErrorCode = EASYPICKII_STEPS::easyStep_ImageStitcher_Stitch2(strImageStitcherSettingsName, EASYPICKII::_HSLFALSE, 0.0, EASYPICKII::_HSLTRUE, EASYPICKII::_HSLTRUE, EASYPICKII::_HSLTRUE, strPlateBarcode, strPlateDescription, intImageStitcherID);
      if (intErrorCode != 0)
      {
        EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
        abort;
      }
      intErrorCode = EASYPICKII_STEPS::easyStep_Colony_Analyse2(strColonySettingsName, EASYPICKII::_HSLFALSE, 0.0, EASYPICKII::_HSLTRUE, EASYPICKII::_HSLTRUE, strPlateBarcode, strPlateDescription, intRackID);
      if (intErrorCode != 0)
      {
        EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
        abort;
      }
    }
    else
    {
      intErrorCode = EASYPICKII_STEPS::easyStep_ImageStitcher_Stitch2(strImageStitcherSettingsName, EASYPICKII::_HSLTRUE, fltAgarHeightRelativeToReferencePoints_mm, EASYPICKII::_HSLTRUE, EASYPICKII::_HSLTRUE, EASYPICKII::_HSLTRUE, strPlateBarcode, strPlateDescription, intImageStitcherID);
      if (intErrorCode != 0)
      {
        EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
        abort;
      }
      intErrorCode = EASYPICKII_STEPS::easyStep_Colony_Analyse2(strColonySettingsName, EASYPICKII::_HSLTRUE, fltAgarHeightRelativeToReferencePoints_mm, EASYPICKII::_HSLTRUE, EASYPICKII::_HSLTRUE, strPlateBarcode, strPlateDescription, intRackID);
      if (intErrorCode != 0)
      {
        EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
        abort;
      }
    }
    intErrorCode = EASYPICKII::DATABASE::SetEasyPickIIRack_Field_ImageStitcherID(intRackID, intImageStitcherID);
    if (intErrorCode != 0)
    {
      EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
      abort;
    }
    intErrorCode = EASYPICKII::DATABASE::GetEasyPickIIRack(intRackID, strRackBarcode, strRackPictureFile, intRackContainersX, intRackContainersY, intRackErrorCode, strRackDescription);
    if (intErrorCode != 0)
    {
      EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
      abort;
    }
    intContainerCount = intRackContainersX * intRackContainersY;
    arrintMaxNumberOfColoniesToPick.SetSize(intContainerCount);
    {
      for(intLoopWell = 0; intLoopWell < intContainerCount;)
      {
        intLoopWell = intLoopWell + 1;
        arrintMaxNumberOfColoniesToPick[ intLoopWell -1] = intMaxNumberOfColoniesToPickFromContainer;
      }
    }
    intErrorCode = EASYPICKII::GUI::Hide();
    if (intErrorCode != 0)
    {
      EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
      abort;
    }
    intErrorCode = EASYPICKII_STEPS::easyStep_Light_On(ML_STAR, intLightSource, fltLightIntensity_pct);
    if (intErrorCode != 0)
    {
      EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
      abort;
    }
    if (blnShowProcessingColonies != 0)
    {
      EASYPICKII::GUI::Show(EASYPICKII::GUI::SHOW::MODE::_NORMAL);
    }
    {
      loopCounterColoniesPickingCycle = 0;
      while (1 == 1)
      {
        loopCounterColoniesPickingCycle = loopCounterColoniesPickingCycle + 1;
        if (blnShowProcessingColonies != 0)
        {
          EASYPICKII::GUI::PICTUREVIEW::Clear();
        }
        strChannelPatternUsable = EASYPICKII::HELPER::MLSTAR::ChannelPattern_LeftAdjust(intMaxNumberOfChannelsToUse, intNumberOfChannels);
        intErrorCode = EASYPICKII_STEPS::easyStep_Colony_RetrieveColonyPositions2(ML_STAR, _strReferencePointTopLeftLabwareID, "QTray_0001", "ml_star\\EasyPickII\\ColonySpot\\colony_spot.rck", intRackID, arrintMaxNumberOfColoniesToPick, EASYPICKII::DATABASE::COLONYPOSITIONS_SORTMODE::SORT_WEIGHT_DESC, strChannelPatternUsable, strChannelPatternUsed, intNumberOfColoniesToPick, intTotalNumberOfColonies, seqColonyPositions, arrintColonyIDs, arrintContainerNumbers);
        if (intErrorCode != 0)
        {
          EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
          abort;
        }
        if (intNumberOfColoniesToPick == 0)
        {
          EASYPICKII::GUI::Hide();
          break;
        }
        if (blnShowProcessingColonies != 0)
        {
          intColonyIDsArraySize=arrintColonyIDs.GetSize();
          {
            for(intColonyIDsIndex = 0; intColonyIDsIndex < intColonyIDsArraySize;)
            {
              intColonyIDsIndex = intColonyIDsIndex + 1;
              intColonyID=arrintColonyIDs.GetAt(intColonyIDsIndex-1);
              if (intColonyID != -1)
              {
                EASYPICKII::GUI::PICTUREVIEW::DisplayColony(intColonyID);
              }
            }
          }
        }
        if (blnDryRun == 0)
        {
          intTipsSequenceCounting = 1;
        }
        else
        {
          intTipsSequenceCounting = 0;
        }
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        if (blnMeasureAgarHeight == 0)
        {
          fltAspirateAtFixHeight_mm = 0.0 + fltPickHeightOverPlate;
        }
        else
        {
          fltAspirateAtFixHeight_mm = fltAgarHeightRelativeToPlate_mm + fltPickHeightOverAgar;
        }
        if (blnFastPick == 0)
        {
          {
            	variable arrRetValues[];
            	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            	strAspirateStepReturn = arrRetValues[2];
          }
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        else
        {
          intErrorCode = EASYPICKII_FASTPICK::Pick(ML_STAR, "QTray_0001", seqColonyPositions, strChannelPatternUsed, fltAspirateAtFixHeight_mm, 25);
        }
        if (blnDryRun == 0)
        {
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
        else
        {
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
        if (blnFastPick == 0)
        {
          intErrorCode = EASYPICKII_STEPS::easyStep_Colony_UpdatePickingState(strAspirateStepReturn, arrintColonyIDs);
          if (intErrorCode != 0)
          {
            EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
            abort;
          }
        }
        else
        {
          intColonyIDsArraySize=arrintColonyIDs.GetSize();
          {
            for(intColonyIDsIndex = 0; intColonyIDsIndex < intColonyIDsArraySize;)
            {
              intColonyIDsIndex = intColonyIDsIndex + 1;
              intColonyID=arrintColonyIDs.GetAt(intColonyIDsIndex-1);
              if (intColonyID != -1)
              {
                intErrorCode = EASYPICKII::DATABASE::SetEasyPickIIColonyPickingState(intColonyID, EASYPICKII::DATABASE::PICKINGSTATE::_OK);
                if (intErrorCode != 0)
                {
                  EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
                  abort;
                }
              }
            }
          }
        }
      }
    }
    if (blnSimulationMode == 0)
    {
      if (blnShowConfigurationDialog != 0)
      {
        onerror goto errLabel_6 ;
        err.Clear();
        _fileSettings.AddField("CameraSettings", strCameraSettingsName, hslString, 255);
        _fileSettings.AddField("ImageStitcherSettings", strImageStitcherSettingsName, hslString, 255);
        _fileSettings.AddField("ColonySettings", strColonySettingsName, hslString, 255);
        _fileSettings.AddField("blnMeasureAgarHeight", blnMeasureAgarHeight, hslInteger);
        _fileSettings.AddField("blnFastPick", blnFastPick, hslInteger);
        _fileSettings.SetDelimiter(hslCSVDelimited);
        if( 0 == _fileSettings.Open(_strSettingsFilePath, hslWrite) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, _strSettingsFilePath, "HxMetEdCompCmd");
        }
        if( 0 == _fileSettings.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        errLabel_6 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
        }   /* end if from skip handler if no error */
        if( 0 != _fileSettings.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        _fileSettings.RemoveFields();
      }
    }
    EASYPICKII_STEPS::easyStep_DeInit(ML_STAR);
    TipCount::Write2(ML_STAR.MlStarStandardVolumeTips, _strTipCounterName, ML_STAR);
    EASYPICKII_STEPS::_ExitLibrary();
  } }
