private function ArrStr_FindIndex( variable & arrstrStrings[], variable strValue ) variable ;
private function Camera_AdjustPosition(  ) void ;
private function Camera_RequestPositionForAgarHeight( variable i_strCameraSettingsName, variable i_strReferencePointTopLeftLabwareID, variable & io_fltPositionAgarHeightX_mm, variable & io_fltPositionAgarHeightY_mm ) void ;
private function MeasureAgarHeight( sequence i_seqLLDPositionOnPlate, variable i_strReferencePointsLabwareID, variable i_strPlateLabwareID, variable & o_fltAgarHeighRelativeToReferencePoints_mm, variable & o_fltAgarHeightRelativeToPlate_mm ) void ;
private function MeasureAgarHeightWithPosition( variable i_fltPositionAgarHeightX_mm, variable i_fltPositionAgarHeightY_mm, variable i_strPlateLabwareID, variable i_strReferencePointTopLeftLabwareID, variable & o_fltAgarHeightRelativeToReferencePoint_mm, variable & o_fltAgarHeightRelativeToPlateBottom_mm ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  if (blnFastPick != 0)
  {
    EASYPICKII_FASTPICK::MoveToSafety_Z_Position(ML_STAR);
  }
  EASYPICKII_STEPS::easyStep_DeInit(ML_STAR);
  TipCount::Write2(ML_STAR.MlStarStandardVolumeTips, _strTipCounterName, ML_STAR);
}

private function ArrStr_FindIndex( variable & arrstrStrings[], variable strValue ) variable {
  private variable intIndex;
  private variable intSize;
  intSize=arrstrStrings.GetSize();
  {
    for(intIndex = 0; intIndex < intSize;)
    {
      intIndex = intIndex + 1;
      if (arrstrStrings.ElementAt( intIndex -1) == strValue)
      {
        return (intIndex);
      }
    }
  }
  return (0);
}

private function MeasureAgarHeight( sequence i_seqLLDPositionOnPlate, variable i_strReferencePointsLabwareID, variable i_strPlateLabwareID, variable & o_fltAgarHeighRelativeToReferencePoints_mm, variable & o_fltAgarHeightRelativeToPlate_mm ) void {
  private variable intLLDMainErrorCode;
  private variable strLLDHeigh;
  private variable fltPlateZ_mm;
  private variable intStepReturnLLDPositions;
  private variable fltReferencePointZ_mm;
  private variable fltReferencePointY_mm;
  private variable fltPlateY_mm;
  private variable fltLLDHeight;
  private variable fltReferencePointX_mm;
  private variable fltPlateX_mm;
  private variable strStepReturnLiquidLevels;
  o_fltAgarHeighRelativeToReferencePoints_mm = 0;
  o_fltAgarHeightRelativeToPlate_mm = 0;
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  {
    	variable arrRetValues[];
    	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
    	strStepReturnLiquidLevels = arrRetValues[2];
  }
  Trace("strStepReturnLiquidLevels: ", strStepReturnLiquidLevels);
  intStepReturnLLDPositions = StepReturn::GetNumberOfPositions(strStepReturnLiquidLevels);
  intLLDMainErrorCode = StepReturn::GetMainError(1, strStepReturnLiquidLevels);
  strLLDHeigh = StepReturn::GetStepData(1, strStepReturnLiquidLevels);
  fltLLDHeight = StrFVal(strLLDHeigh);
  intErrorCode = EASYPICKII::HELPER::LABWARE::GetPositionCoordinates_by_Labware(ML_STAR, i_strReferencePointsLabwareID, fltReferencePointX_mm, fltReferencePointY_mm, fltReferencePointZ_mm);
  if (intErrorCode != 0)
  {
    EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
    abort;
  }
  intErrorCode = EASYPICKII::HELPER::LABWARE::GetPositionCoordinates_by_Labware(ML_STAR, i_strPlateLabwareID, fltPlateX_mm, fltPlateY_mm, fltPlateZ_mm);
  if (intErrorCode != 0)
  {
    EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
    abort;
  }
  o_fltAgarHeightRelativeToPlate_mm = fltLLDHeight - fltPlateZ_mm;
  o_fltAgarHeighRelativeToReferencePoints_mm = fltLLDHeight - fltReferencePointZ_mm;
  Trace("o_fltAgarHeighRelativeToReferencePoints_mm: ", o_fltAgarHeighRelativeToReferencePoints_mm);
  Trace("o_fltAgarHeightRelativeToPlate_mm: ", o_fltAgarHeightRelativeToPlate_mm);
}

private function Camera_AdjustPosition(  ) void {
  private dialog customDialog_1;
  private dialog dialogHandle_2;
  private variable fltCurrentCameraAdjustmentX_mm;
  private variable strCurrentLabwareID;
  private variable fltY_75pct;
  private variable flt_mmPerPct;
  private variable fltCurrentCameraPositionY_mm;
  private variable fltRadius_pct;
  private variable fltCurrentCameraPositionX_mm;
  private variable fltY_50pct;
  private variable flt10mm_pct;
  private variable fltY_100pct;
  private variable fltRadius_mm;
  private variable fltLabwareZ_mm;
  private variable fltLabwareY_mm;
  private variable fltIncrement_mm;
  private variable fltLabwareX_mm;
  private variable intAdjustDialogResult;
  private variable fltTopLeftX_pct;
  private variable loopCounter1;
  private variable blnMainWindowVisible;
  private variable fltTopLeftY_pct;
  private variable fltPictureRatio;
  private variable intIndexMoveIncrement;
  private variable strDrawingsColor;
  private variable fltY_25pct;
  private variable fltCurrentCameraAdjustmentY_mm;
  private variable fltDiameter_pct;
  private variable arrintMoveIncrement_mm[];
  private variable arrstrLabwareIDs[];
  EASYPICKII::HELPER::TRACE::FmtTrace2Text(Translate(""), EASYPICKII::_TRACE_LEVEL_FULL, "Begin CameraPosition_Adjust", "");
  EASYPICKII::HELPER::TRACE::Trace2Text(EASYPICKII::_TRACE_LEVEL_FULL, "Begin CameraPosition_Adjust", "");
  fltCurrentCameraAdjustmentX_mm = _fltCameraAdjustmentX_mm;
  fltCurrentCameraAdjustmentY_mm = _fltCameraAdjustmentY_mm;
  arrstrLabwareIDs.SetSize(0);
  arrstrLabwareIDs.AddAsLast("easypickii_adjust_xl_small_0001");
  arrstrLabwareIDs.AddAsLast("easypickii_adjust_xl_small_0002");
  arrstrLabwareIDs.AddAsLast("easypickii_adjust_xl_small_0003");
  arrstrLabwareIDs.AddAsLast("easypickii_adjust_xl_small_0004");
  arrstrLabwareIDs.AddAsLast("easypickii_adjust_xl_big_0001");
  strCurrentLabwareID = "easypickii_adjust_xl_small_0001";
  intIndexMoveIncrement = 4;
  arrintMoveIncrement_mm.AddAsLast(0.1);
  arrintMoveIncrement_mm.AddAsLast(0.5);
  arrintMoveIncrement_mm.AddAsLast(1);
  arrintMoveIncrement_mm.AddAsLast(2.0);
  arrintMoveIncrement_mm.AddAsLast(10.0);
  arrintMoveIncrement_mm.AddAsLast(50.0);
  arrintMoveIncrement_mm.AddAsLast(100.0);
  intErrorCode = EASYPICKII::CAMERA::Open(Translate(""));
  if (intErrorCode != 0)
  {
    EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
    return;
  }
  EASYPICKII::GUI::IsVisible(blnMainWindowVisible);
  EASYPICKII::GUI::Hide();
  EASYPICKII::GUI::LIVEVIEW::Show(EASYPICKII::GUI::SHOW::MODE::_NORMAL);
  strDrawingsColor = "red";
  fltPictureRatio = 1536 / (2048 * 1.0);
  flt_mmPerPct = 1.476 * 1;
  fltY_25pct = 25 * fltPictureRatio;
  fltY_50pct = 50 * fltPictureRatio;
  fltY_75pct = 75 * fltPictureRatio;
  fltY_100pct = 100 * fltPictureRatio;
  flt10mm_pct = 10 / (flt_mmPerPct * 1.0);
  fltRadius_mm = 1.5;
  fltRadius_pct = fltRadius_mm / (flt_mmPerPct * 1.0);
  fltDiameter_pct = fltRadius_pct * 2;
  fltTopLeftX_pct = 50 - fltRadius_pct;
  fltTopLeftY_pct = fltY_50pct - fltRadius_pct;
  EASYPICKII::GUI::LIVEVIEW::Draw_Ellipse("Circle", fltTopLeftX_pct, fltTopLeftY_pct, fltDiameter_pct, fltDiameter_pct, 0, strDrawingsColor, 1, "margin");
  {
    loopCounter1 = 0;
    while (1 == 1)
    {
      loopCounter1 = loopCounter1 + 1;
      intErrorCode = EASYPICKII::HELPER::LABWARE::GetPositionCoordinates_by_Labware(ML_STAR, strCurrentLabwareID, fltLabwareX_mm, fltLabwareY_mm, fltLabwareZ_mm);
      fltCurrentCameraPositionX_mm = 0 + fltCurrentCameraAdjustmentX_mm;
      fltCurrentCameraPositionY_mm = 0 + fltCurrentCameraAdjustmentY_mm;
      onerror goto errLabel_3 ;
      err.Clear();
      intErrorCode = EASYPICKII_STEPS::easyStep_Camera_Place_to_Labware(ML_STAR, strCurrentLabwareID, fltCurrentCameraPositionX_mm, fltCurrentCameraPositionY_mm, 0.0);
      errLabel_3 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        dialogHandle_2.SetOutput(Translate("Position out of range!"));
        dialogHandle_2.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }   /* end if from skip handler if no error */
      customDialog_1.InitCustomDialog("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");
      customDialog_1.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", arrstrLabwareIDs );
      customDialog_1.SetCustomDialogArrayProperty( "comboBox2.ItemsSource", arrintMoveIncrement_mm );
      customDialog_1.SetCustomDialogProperty( "numericYBottom.Value", fltCurrentCameraAdjustmentX_mm );
      customDialog_1.SetCustomDialogProperty( "numericZFromTop.Value", fltCurrentCameraAdjustmentY_mm );
      customDialog_1.SetCustomDialogProperty( "comboBox1.Text", strCurrentLabwareID );
      customDialog_1.SetCustomDialogProperty( "comboBox2.SelectedIndex", intIndexMoveIncrement );
      customDialog_1.ShowCustomDialog();
      intAdjustDialogResult = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
      fltCurrentCameraAdjustmentX_mm = customDialog_1.GetCustomDialogProperty( "numericYBottom.Value" );
      fltCurrentCameraAdjustmentY_mm = customDialog_1.GetCustomDialogProperty( "numericZFromTop.Value" );
      strCurrentLabwareID = customDialog_1.GetCustomDialogProperty( "comboBox1.Text" );
      intIndexMoveIncrement = customDialog_1.GetCustomDialogProperty( "comboBox2.SelectedIndex" );
      if (intAdjustDialogResult == 31)
      {
      }
      if (intAdjustDialogResult == 1)
      {
        _fltCameraAdjustmentX_mm = fltCurrentCameraAdjustmentX_mm;
        _fltCameraAdjustmentY_mm = fltCurrentCameraAdjustmentY_mm;
        EASYPICKII::GUI::LIVEVIEW::Draw_Clear("Circle");
        if (blnMainWindowVisible != 0)
        {
          EASYPICKII::GUI::Show(EASYPICKII::GUI::SHOW::MODE::_NORMAL);
        }
        EASYPICKII::HELPER::TRACE::Trace2Text(EASYPICKII::_TRACE_LEVEL_FULL, "End CameraPosition_Adjust", "");
        return;
      }
      if (intAdjustDialogResult == 2)
      {
        EASYPICKII::GUI::LIVEVIEW::Draw_Clear("Circle");
        if (blnMainWindowVisible != 0)
        {
          EASYPICKII::GUI::Show(EASYPICKII::GUI::SHOW::MODE::_NORMAL);
        }
        EASYPICKII::HELPER::TRACE::Trace2Text(EASYPICKII::_TRACE_LEVEL_FULL, "End CameraPosition_Adjust", "");
        return;
      }
      fltIncrement_mm=arrintMoveIncrement_mm.GetAt(intIndexMoveIncrement-1);
      if (intAdjustDialogResult == 11)
      {
        fltCurrentCameraAdjustmentY_mm = fltCurrentCameraAdjustmentY_mm + fltIncrement_mm;
      }
      if (intAdjustDialogResult == 12)
      {
        fltCurrentCameraAdjustmentY_mm = fltCurrentCameraAdjustmentY_mm - fltIncrement_mm;
      }
      if (intAdjustDialogResult == 13)
      {
        fltCurrentCameraAdjustmentX_mm = fltCurrentCameraAdjustmentX_mm - fltIncrement_mm;
      }
      if (intAdjustDialogResult == 14)
      {
        fltCurrentCameraAdjustmentX_mm = fltCurrentCameraAdjustmentX_mm + fltIncrement_mm;
      }
    }
  }
}

private function Camera_RequestPositionForAgarHeight( variable i_strCameraSettingsName, variable i_strReferencePointTopLeftLabwareID, variable & io_fltPositionAgarHeightX_mm, variable & io_fltPositionAgarHeightY_mm ) void {
  private dialog customDialog_4;
  private dialog dialogHandle_5;
  private variable fltY_75pct;
  private variable flt_mmPerPct;
  private variable fltLineLength_pct;
  private variable fltY1_pct;
  private variable intAgarHeightDialogResult;
  private variable fltY_50pct;
  private variable fltY2_pct;
  private variable fltX1_pct;
  private variable flt10mm_pct;
  private variable fltX2_pct;
  private variable fltY_100pct;
  private variable fltDistance_pct;
  private variable fltIncrement_mm;
  private variable fltCameraPositionY_mm;
  private variable intChannelNumberForMeasure;
  private variable fltCameraPositionX_mm;
  private variable loopCounter1;
  private variable blnMainWindowVisible;
  private variable intIndexMoveIncrement;
  private variable fltPictureRatio;
  private variable strDrawingsColor;
  private variable loopCounterLieal;
  private variable fltY_25pct;
  private variable arrintMoveIncrement_mm[];
  intChannelNumberForMeasure = 1;
  intIndexMoveIncrement = 4;
  arrintMoveIncrement_mm.AddAsLast(0.1);
  arrintMoveIncrement_mm.AddAsLast(0.5);
  arrintMoveIncrement_mm.AddAsLast(1);
  arrintMoveIncrement_mm.AddAsLast(2.0);
  arrintMoveIncrement_mm.AddAsLast(10.0);
  arrintMoveIncrement_mm.AddAsLast(50.0);
  arrintMoveIncrement_mm.AddAsLast(100.0);
  intErrorCode = EASYPICKII::CAMERA::Open(i_strCameraSettingsName);
  if (intErrorCode != 0)
  {
    EASYPICKII_STEPS::ShowErrorDialog(intErrorCode);
    return;
  }
  EASYPICKII::GUI::IsVisible(blnMainWindowVisible);
  EASYPICKII::GUI::Hide();
  EASYPICKII::GUI::LIVEVIEW::Show(EASYPICKII::GUI::SHOW::MODE::_NORMAL);
  EASYPICKII::GUI::LIVEVIEW::Draw_ClearAll();
  strDrawingsColor = "red";
  fltPictureRatio = 1536 / (2048 * 1.0);
  fltPictureRatio = 1536 / (2048 * 1.0);
  flt_mmPerPct = 1.476 * 1;
  fltY_50pct = 50 * fltPictureRatio;
  fltY_25pct = 25 * fltPictureRatio;
  fltY_75pct = 75 * fltPictureRatio;
  fltY_100pct = 100 * fltPictureRatio;
  flt10mm_pct = 10 / (flt_mmPerPct * 1.0);
  {
    loopCounterLieal = 0;
    while (1 == 1)
    {
      loopCounterLieal = loopCounterLieal + 1;
      fltDistance_pct = loopCounterLieal * flt10mm_pct;
      fltX1_pct = 50 - fltDistance_pct;
      if (fltX1_pct < 0)
      {
        break;
      }
      fltX2_pct = fltX1_pct;
      fltLineLength_pct = flt10mm_pct / (2 * 1.0);
      fltY1_pct = fltY_50pct - fltLineLength_pct;
      fltY2_pct = fltY_50pct + fltLineLength_pct;
      EASYPICKII::GUI::LIVEVIEW::Draw_Line(Translate(""), fltX1_pct, fltY1_pct, fltX2_pct, fltY2_pct, strDrawingsColor, 1);
    }
  }
  {
    loopCounterLieal = 0;
    while (1 == 1)
    {
      loopCounterLieal = loopCounterLieal + 1;
      fltDistance_pct = loopCounterLieal * flt10mm_pct;
      fltX1_pct = 50 + fltDistance_pct;
      if (fltX1_pct > 100)
      {
        break;
      }
      fltX2_pct = fltX1_pct;
      fltLineLength_pct = flt10mm_pct / (2 * 1.0);
      fltY1_pct = fltY_50pct - fltLineLength_pct;
      fltY2_pct = fltY_50pct + fltLineLength_pct;
      EASYPICKII::GUI::LIVEVIEW::Draw_Line(Translate(""), fltX1_pct, fltY1_pct, fltX2_pct, fltY2_pct, strDrawingsColor, 1);
    }
  }
  {
    loopCounterLieal = 0;
    while (1 == 1)
    {
      loopCounterLieal = loopCounterLieal + 1;
      fltDistance_pct = loopCounterLieal * flt10mm_pct;
      fltY1_pct = fltY_50pct - fltDistance_pct;
      if (fltY1_pct < 0)
      {
        break;
      }
      fltY2_pct = fltY1_pct;
      fltLineLength_pct = flt10mm_pct / (2 * 1.0);
      fltX1_pct = 50 - fltLineLength_pct;
      fltX2_pct = 50 + fltLineLength_pct;
      EASYPICKII::GUI::LIVEVIEW::Draw_Line(Translate(""), fltX1_pct, fltY1_pct, fltX2_pct, fltY2_pct, strDrawingsColor, 1);
    }
  }
  {
    loopCounterLieal = 0;
    while (1 == 1)
    {
      loopCounterLieal = loopCounterLieal + 1;
      fltDistance_pct = loopCounterLieal * flt10mm_pct;
      fltY1_pct = fltY_50pct + fltDistance_pct;
      if (fltY1_pct > fltY_100pct)
      {
        break;
      }
      fltY2_pct = fltY1_pct;
      fltLineLength_pct = flt10mm_pct / (2 * 1.0);
      fltX1_pct = 50 - fltLineLength_pct;
      fltX2_pct = 50 + fltLineLength_pct;
      EASYPICKII::GUI::LIVEVIEW::Draw_Line(Translate(""), fltX1_pct, fltY1_pct, fltX2_pct, fltY2_pct, strDrawingsColor, 1);
    }
  }
  {
    for(loopCounterLieal = 0; loopCounterLieal < 9;)
    {
      loopCounterLieal = loopCounterLieal + 1;
      fltDistance_pct = loopCounterLieal / (flt_mmPerPct * 1.0);
      fltX1_pct = 50 - fltDistance_pct;
      fltX2_pct = fltX1_pct;
      fltLineLength_pct = 0.5 / (flt_mmPerPct * 1.0);
      if (loopCounterLieal == 5)
      {
        fltLineLength_pct = fltLineLength_pct * 2.5;
      }
      fltY1_pct = fltY_50pct - fltLineLength_pct;
      fltY2_pct = fltY_50pct + fltLineLength_pct;
      EASYPICKII::GUI::LIVEVIEW::Draw_Line(Translate(""), fltX1_pct, fltY1_pct, fltX2_pct, fltY2_pct, strDrawingsColor, 1);
    }
  }
  {
    for(loopCounterLieal = 0; loopCounterLieal < 9;)
    {
      loopCounterLieal = loopCounterLieal + 1;
      fltDistance_pct = loopCounterLieal / (flt_mmPerPct * 1.0);
      fltX1_pct = 50 + fltDistance_pct;
      fltX2_pct = fltX1_pct;
      fltLineLength_pct = 0.5 / (flt_mmPerPct * 1.0);
      if (loopCounterLieal == 5)
      {
        fltLineLength_pct = fltLineLength_pct * 2.5;
      }
      fltY1_pct = fltY_50pct - fltLineLength_pct;
      fltY2_pct = fltY_50pct + fltLineLength_pct;
      EASYPICKII::GUI::LIVEVIEW::Draw_Line(Translate(""), fltX1_pct, fltY1_pct, fltX2_pct, fltY2_pct, strDrawingsColor, 1);
    }
  }
  {
    for(loopCounterLieal = 0; loopCounterLieal < 9;)
    {
      loopCounterLieal = loopCounterLieal + 1;
      fltDistance_pct = loopCounterLieal / (flt_mmPerPct * 1.0);
      fltY1_pct = fltY_50pct - fltDistance_pct;
      fltY2_pct = fltY1_pct;
      fltLineLength_pct = 0.5 / (flt_mmPerPct * 1.0);
      if (loopCounterLieal == 5)
      {
        fltLineLength_pct = fltLineLength_pct * 2.5;
      }
      fltX1_pct = 50 - fltLineLength_pct;
      fltX2_pct = 50 + fltLineLength_pct;
      EASYPICKII::GUI::LIVEVIEW::Draw_Line(Translate(""), fltX1_pct, fltY1_pct, fltX2_pct, fltY2_pct, strDrawingsColor, 1);
    }
  }
  {
    for(loopCounterLieal = 0; loopCounterLieal < 9;)
    {
      loopCounterLieal = loopCounterLieal + 1;
      fltDistance_pct = loopCounterLieal / (flt_mmPerPct * 1.0);
      fltY1_pct = fltY_50pct + fltDistance_pct;
      fltY2_pct = fltY1_pct;
      fltLineLength_pct = 0.5 / (flt_mmPerPct * 1.0);
      if (loopCounterLieal == 5)
      {
        fltLineLength_pct = fltLineLength_pct * 2.5;
      }
      fltX1_pct = 50 - fltLineLength_pct;
      fltX2_pct = 50 + fltLineLength_pct;
      EASYPICKII::GUI::LIVEVIEW::Draw_Line(Translate(""), fltX1_pct, fltY1_pct, fltX2_pct, fltY2_pct, strDrawingsColor, 1);
    }
  }
  EASYPICKII::GUI::LIVEVIEW::Draw_Line(Translate(""), 0, fltY_50pct, 100, fltY_50pct, strDrawingsColor, 1);
  EASYPICKII::GUI::LIVEVIEW::Draw_Line(Translate(""), 50, 0, 50, fltY_100pct, strDrawingsColor, 1);
  {
    loopCounter1 = 0;
    while (1 == 1)
    {
      loopCounter1 = loopCounter1 + 1;
      fltCameraPositionX_mm = io_fltPositionAgarHeightX_mm + _fltCameraAdjustmentX_mm;
      fltCameraPositionY_mm = io_fltPositionAgarHeightY_mm + _fltCameraAdjustmentY_mm;
      onerror goto errLabel_6 ;
      err.Clear();
      intErrorCode = EASYPICKII_STEPS::easyStep_Camera_Place_to_Labware(ML_STAR, i_strReferencePointTopLeftLabwareID, fltCameraPositionX_mm, fltCameraPositionY_mm, 0.0);
      errLabel_6 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        dialogHandle_5.SetOutput(Translate("Position out of range!"));
        dialogHandle_5.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }   /* end if from skip handler if no error */
      customDialog_4.InitCustomDialog("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");
      customDialog_4.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", arrintMoveIncrement_mm );
      customDialog_4.SetCustomDialogProperty( "numericXLeft.Value", io_fltPositionAgarHeightX_mm );
      customDialog_4.SetCustomDialogProperty( "numericYTop.Value", io_fltPositionAgarHeightY_mm );
      customDialog_4.SetCustomDialogProperty( "comboBox1.SelectedIndex", intIndexMoveIncrement );
      customDialog_4.ShowCustomDialog();
      intAgarHeightDialogResult = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
      io_fltPositionAgarHeightX_mm = customDialog_4.GetCustomDialogProperty( "numericXLeft.Value" );
      io_fltPositionAgarHeightY_mm = customDialog_4.GetCustomDialogProperty( "numericYTop.Value" );
      intIndexMoveIncrement = customDialog_4.GetCustomDialogProperty( "comboBox1.SelectedIndex" );
      fltIncrement_mm=arrintMoveIncrement_mm.GetAt(intIndexMoveIncrement-1);
      if (intAgarHeightDialogResult == 1)
      {
        EASYPICKII::GUI::LIVEVIEW::Draw_ClearAll();
        if (blnMainWindowVisible != 0)
        {
          EASYPICKII::GUI::Show(EASYPICKII::GUI::SHOW::MODE::_NORMAL);
        }
        return;
      }
      if (intAgarHeightDialogResult == 11)
      {
        io_fltPositionAgarHeightY_mm = io_fltPositionAgarHeightY_mm + fltIncrement_mm;
      }
      if (intAgarHeightDialogResult == 12)
      {
        io_fltPositionAgarHeightY_mm = io_fltPositionAgarHeightY_mm - fltIncrement_mm;
      }
      if (intAgarHeightDialogResult == 13)
      {
        io_fltPositionAgarHeightX_mm = io_fltPositionAgarHeightX_mm - fltIncrement_mm;
      }
      if (intAgarHeightDialogResult == 14)
      {
        io_fltPositionAgarHeightX_mm = io_fltPositionAgarHeightX_mm + fltIncrement_mm;
      }
      if (intAgarHeightDialogResult == 21)
      {
        Camera_AdjustPosition();
      }
    }
  }
}

private function MeasureAgarHeightWithPosition( variable i_fltPositionAgarHeightX_mm, variable i_fltPositionAgarHeightY_mm, variable i_strPlateLabwareID, variable i_strReferencePointTopLeftLabwareID, variable & o_fltAgarHeightRelativeToReferencePoint_mm, variable & o_fltAgarHeightRelativeToPlateBottom_mm ) void {
  private variable fltDummy1;
  private variable fltDummy2;
  private variable fltReferencePointY_mm;
  private variable intChannelNumberForMeasure;
  private variable fltReferencePointX_mm;
  private variable fltChannelOffsetY_mm;
  private variable fltPositionZ_mm;
  private variable fltChannelOffsetX_mm;
  private variable fltPositionY_mm;
  private variable fltPositionX_mm;
  private sequence seqCLLDPosition;
  o_fltAgarHeightRelativeToReferencePoint_mm = 0;
  o_fltAgarHeightRelativeToPlateBottom_mm = 0;
  intChannelNumberForMeasure = 1;
  intErrorCode = EASYPICKII::HELPER::LABWARE::GetPositionCoordinates_Center_by_Labware(ML_STAR, i_strPlateLabwareID, fltDummy1, fltDummy2, fltPositionZ_mm);
  EASYPICKII::HELPER::LABWARE::GetPositionCoordinates_Center_by_Labware(ML_STAR, i_strReferencePointTopLeftLabwareID, fltReferencePointX_mm, fltReferencePointY_mm, fltDummy1);
  fltPositionX_mm = i_fltPositionAgarHeightX_mm + fltReferencePointX_mm;
  fltPositionY_mm = i_fltPositionAgarHeightY_mm + fltReferencePointY_mm;
  EASYPICKII::SETTINGS::Instrument_GetChannelOffset(intChannelNumberForMeasure, fltChannelOffsetX_mm, fltChannelOffsetY_mm);
  fltPositionX_mm = fltPositionX_mm - fltChannelOffsetX_mm;
  MECC::TraceComment(Translate("Offset in light table coordinate system. \nPosition in ML_STAR coordinate sytem:  Y-Axis is upside down: Y-Value is added."));
  fltPositionY_mm = fltPositionY_mm + fltChannelOffsetY_mm;
  EASYPICKII::HELPER::LABWARE::SpotContainerPlace(ML_STAR, "ml_star\\EasyPickII\\ColonySpot\\colony_spot.rck", fltPositionX_mm, fltPositionY_mm, fltPositionZ_mm, 1, seqCLLDPosition);
  MeasureAgarHeight(seqCLLDPosition, i_strReferencePointTopLeftLabwareID, i_strPlateLabwareID, o_fltAgarHeightRelativeToReferencePoint_mm, o_fltAgarHeightRelativeToPlateBottom_mm);
  EASYPICKII::HELPER::LABWARE::SpotContainerRemove(ML_STAR, 1);
}
