global device ML_STAR ("iGEM calibration plate.lay", "ML_STAR", hslTrue);
global device HxFan ("iGEM calibration plate.lay", "HxFan", hslTrue);
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "NIST\\Libraries\\NIST_Device_Controllers.hs_" }
 namespace _Method { #include "Common\\iSWAP-PlateAndLidMovement.hs_" }
#include "iGEM calibration plate.res"
variable bln_Global_SimulatorMode;
variable mix_volume;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    NIST_DEVICE_CONTROLLERS::_InitLibrary();
    ISWAP_PLATEANDLIDMOVEMENT::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    StartUp();
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.calibration_plate_lid, ML_STAR.Lid_parking_calibration_plate_lid, 1, 1, ML_STAR);
    MECC::TraceComment(Translate("***************************************************************************\nAdd PBS and water to plate\n***************************************************************************"));
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    {
      sequence arrseqAspirate_1[];
      sequence arrseqDispense_1[];
      arrseqAspirate_1.SetSize(1);
      arrseqAspirate_1.SetAt(0, ML_STAR.PBS_and_water_stock);
      arrseqDispense_1.SetSize(1);
      arrseqDispense_1.SetAt(0, ML_STAR.PBS_and_water_dilutions);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 3);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 0);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 5);
      PTL::SetPipettingState("DispenseMode", 1);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
      PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, arrseqAspirate_1, arrseqDispense_1, 1, 1, 100, 0, 2, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.PBS_and_water_stock, ML_STAR.PBS_and_water_dilutions) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    MECC::TraceComment(Translate("***************************************************************************\nAdd dyes and beads to starting wells for dilution series\n***************************************************************************"));
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    MECC::TraceComment(Translate("***************************************************************************\nPipette the dilution series\n***************************************************************************"));
    mix_volume = 150;
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    {
      sequence arrseqAspirate_2[];
      sequence arrseqDispense_2[];
      arrseqAspirate_2.SetSize(1);
      arrseqAspirate_2.SetAt(0, ML_STAR.dilution_from);
      arrseqDispense_2.SetSize(1);
      arrseqDispense_2.SetAt(0, ML_STAR.dilution_to);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 3);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 0);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
      PTL::SetPipettingState("AspiratePrerinsingMixPosition", 0.5);
      PTL::SetPipettingState("AspiratePrerinsingMixVolume", mix_volume);
      PTL::SetPipettingState("DispenseSubmergeDepth", 2);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
      PTL::SetPipettingState("DispenseFluidHeight", 0);
      PTL::SetPipettingState("DispenseMode", 3);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseSurface_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslTrue);
      PTL::SetPipettingState("DispenseSequenceReducible", hslTrue);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, arrseqAspirate_2, arrseqDispense_2, 1, 1, 100, 0, 1, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.dilution_from, ML_STAR.dilution_to) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    {
      sequence arrseqAspirate_3[];
      sequence arrseqDispense_3[];
      arrseqAspirate_3.SetSize(1);
      arrseqAspirate_3.SetAt(0, ML_STAR.dilution_from_last);
      arrseqDispense_3.SetSize(1);
      arrseqDispense_3.SetAt(0, ML_STAR.LiquidWaste);
      PTL::ResetPipettingStateAndSequences("");
      PTL::SetPipettingState("UserResponseTime", hslInfinite);
      PTL::SetPipettingState("ErrorHandling", 3);
      PTL::SetPipettingState("TipCountingEnabled", hslFalse);
      PTL::SetPipettingState("TipCountingIdentifier", "");
      PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
      PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
      PTL::SetPipettingState("CalibrateCarrierChannel", -1);
      PTL::SetPipettingState("InitializeCustomStepID", 0);
      PTL::SetPipettingState("LoadCarrierCustomStepID", 0);
      PTL::SetPipettingState("UnloadCarrierCustomStepID", 0);
      PTL::SetPipettingState("CalibrateCarrierCustomStepID", 0);
      PTL::SetPipettingState("TipPickupCustomStepID", 0);
      PTL::SetPipettingState("TipEjectCustomStepID", 0);
      PTL::SetPipettingState("AspirateCustomStepID", 0);
      PTL::SetPipettingState("DispenseCustomStepID", 0);
      PTL::SetPipettingState("PreDispenseCustomStepID", 0);
      PTL::SetPipettingState("PostDispenseCustomStepID", 0);
      PTL::SetPipettingState("StartNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("WaitNeedleWashCustomStepID", 0);
      PTL::SetPipettingState("InitializeChannelVariable", "");
      PTL::SetPipettingState("InitializeEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupChannelVariable", "");
      PTL::SetPipettingState("TipPickupEnabled", hslFalse);
      PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
      PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
      PTL::SetPipettingState("TipEjectChannelVariable", "");
      PTL::SetPipettingState("AspirateMode", 0);
      PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
      PTL::SetPipettingState("AspirateFluidHeight", 0);
      PTL::SetPipettingState("AspirateSubmergeDepth", 2);
      PTL::SetPipettingState("AspirateChannelVariable", "");
      PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
      PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
      PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
      PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
      PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
      PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
      PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
      PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
      PTL::SetPipettingState("AspiratePrerinsingMixCycles", 3);
      PTL::SetPipettingState("AspiratePrerinsingMixPosition", 0.5);
      PTL::SetPipettingState("AspiratePrerinsingMixVolume", mix_volume);
      PTL::SetPipettingState("DispenseSubmergeDepth", 0);
      PTL::SetPipettingState("DispenseChannelVariable", "");
      PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
      PTL::SetPipettingState("DispenseFluidHeight", 5);
      PTL::SetPipettingState("DispenseMode", 1);
      PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
      PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeFilter_Water_DispenseJet_Empty");
      PTL::SetPipettingState("DispenseSequenceReloadable", hslTrue);
      PTL::SetPipettingState("DispenseSequenceReducible", hslTrue);
      PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
      PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
      PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
      PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
      PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
      PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
      PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
      if( 0 == PTL::Pipette3(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, arrseqAspirate_3, arrseqDispense_3, 1, 1, 100, 0, 1, hslInfinite, hslInfinite, hslInfinite, "", ML_STAR.dilution_from_last, ML_STAR.LiquidWaste) )
      {
            PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
      }
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ISWAP_PLATEANDLIDMOVEMENT::MoveLid(ML_STAR.Lid_parking_calibration_plate_lid, ML_STAR.calibration_plate_lid, 1, 1, ML_STAR);
    CleanUp();
    NIST_DEVICE_CONTROLLERS::_ExitLibrary();
    ISWAP_PLATEANDLIDMOVEMENT::_ExitLibrary();
  } }
