private function CleanUp(  ) void ;
private function StartUp(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  CleanUp();
}

private function StartUp(  ) void {
  MECC::TraceComment(Translate("***************************************************************************\nStartUp() submethod\n***************************************************************************"));
  bln_Global_SimulatorMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
  if (bln_Global_SimulatorMode == 0)
  {
    {
      	HxFan.SetComPort("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"); // SetComPort
    }
    {
      	HxFan.SetFanSpeed("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"); // SetFanSpeed
    }
    {
      	HxFan.SetContinuousMode("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"); // SetContinuousMode
    }
  }
  TipCount::Edit2(ML_STAR.MlStar50ulTipWithFilter, "tip_counter_50", ML_STAR, 300);
  TipCount::Edit2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, "tip_counter_300", ML_STAR, 300);
  TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, "tip_counter_1000", ML_STAR, 300);
  ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
  ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
}

private function CleanUp(  ) void {
  MECC::TraceComment(Translate("***************************************************************************\nCleanUp() submethod\n***************************************************************************"));
  if (bln_Global_SimulatorMode == 0)
  {
    {
      	HxFan.SetFanSpeed("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"); // SetFanSpeed
    }
  }
  ML_STAR._2931977C_E32F_4471_8B68_F31ED1A866F5("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"); // LockFrontCover
  TipCount::Write2(ML_STAR.MlStar50ulTipWithFilter, "tip_counter_50", ML_STAR);
  TipCount::Write2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, "tip_counter_300", ML_STAR);
  TipCount::Write2(ML_STAR.MlStar1000ulHighVolumeTipWithFilter, "tip_counter_1000", ML_STAR);
}
